#pragma once
//#include "HSL_MethodHelper.hsl"
#include "Artel\\Resources\\Library\\Data_Controller_GlobalVariables.hsl"
#include "Artel\\Resources\\Library\\ConfigurationEditor.hs_"
#include "HSLStrLib.hsl"
#include "HSLExtensions\\Sequence.hsl"
#include "HSLSeqLib.hsl"
#include "Alpha Numeric Conversion\\Alpha Numeric Conversion.hs_"
#include "HSLDevLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLVectorDbTracking.hsl"
#include "HSLDeckVisualize.hsl"
#include "ExcelEdit.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLExtensions\\Directory.hsl"
#include "HSLExtensions\\Core.hsl"
#include "HSLTimLib.hsl"
#include "HSLExtensions\\Drive.hsl"
#include "HSLExtensions\\String.hsl"
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "ASWStandardDialogs\\AswStatusDialog.hsl"
#include "HSLExtensions\\Array.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMthLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLSTCCLib.hs_"

namespace SANGER_DIALOG_CONTROLLER {
  variable t_intRemainingTipsSamples;
  variable l_strMachineType;
  variable l_blnAddRange;
  variable l_blnMakeBaseline;
  function INIT_InitializeController(  ) void ;
  function LOAD_ChannelReagents( device & ML_STAR ) void ;
  function LOAD_MPHReagents( device & ML_STAR ) void ;
  function LOAD_Plates( device & ML_STAR ) void ;
  function LOAD_Tips( device & ML_STAR ) void ;
  function SHOW_ChannelOptions(  ) variable ;
  function SHOW_MethodFinish( variable i_blnSuccess ) void ;
  function SHOW_MethodStart( device & ML_STAR ) void ;
  function SHOW_RangeOptions( device & ML_STAR ) variable ;
  function SHOW_SystemOptions( device & ML_STAR ) void ;
  function SHOW_TipOptions(  ) variable ;
  private function _ConvertToInteger( variable iVariable, variable & oVariable ) void ;
  private function _GetCarrierAndSiteID( device & Instrument, variable i_strLabwareID, variable & o_str_TemplateID, variable & o_str_TemplateSiteID ) void ;
  private function _GetCarrierTracks( device & Instrument, variable i_strLabwareID, variable & o_int_TotalTracks, variable & o_int_LeftMostTrack, variable & o_int_RightMostTrack ) void ;
  private function _GetConfigFile( device & Instrument, variable i_strLabware, variable & o_str_ConfigFilePath ) void ;
  private function _GetDoorCloseStatus( device & ML_STAR, variable & o_blnDoorStatus ) void ;
  private function _GetFirstPosition( device & Instrument, variable i_str_LabID, variable & o_str_PosID ) void ;
  private function _GetTemplateOrigin2( device & Instrument, variable i_str_TemplateLabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void ;
  private function _GetTipDescription( variable i_intTipType, variable & o_strTipName ) void ;
  private function _GetVolumesPerLabID_Channels( device & ML_STAR, variable & i_arrLabID[], variable & o_arrVolumesNeeded[] ) void ;
  private function _GetVolumesPerLabID_MPH( device & ML_STAR, variable & i_arrLabID[], variable & o_arrVolumesNeeded[] ) void ;
  private function _LockDoor( device & ML_STAR ) void ;
  private function _Lookup( variable & array[], variable item ) variable ;
  private function _UnlockDoor( device & ML_STAR ) void ;
  private function _UpdateStatus( variable i_strText, variable i_blnIndentText ) void ;
  function _InitLibrary() {
    CONFIGURATIONEDITOR::_InitLibrary();
    ANC::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    CONFIGURATIONEDITOR::_ExitLibrary();
    ANC::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
  }

  function INIT_InitializeController(  ) void {
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    DATA_CONTROLLER::INIT::LockLibrary();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function SHOW_SystemOptions( device & ML_STAR ) void {
    private variable l_intTotalOptions;
    private variable l_strImageName1mLChannel;
    private variable l_strImageName5mLChannel;
    private variable l_strImageNameMPH;
    private variable l_intOptionSelection;
    private variable l_blnInvisible;
    private variable l_strImageNameSTAR;
    private variable l_strImageNameSTARlet;
    private variable l_strImageNameSTARPlus;
    private variable l_strImageNameVantage2_0;
    private variable l_strImageNameVantage1_3;
    private variable l_strImageInstrument;
    private variable l_strImageOption1;
    private variable l_strImageOption2;
    private variable l_strImageOption3;
    private variable l_strDescriptionInstrument;
    private variable l_strDescriptionOption1;
    private variable l_strDescriptionOption2;
    private variable l_strDescriptionOption3;
    private variable l_arrOptionsOrder[];
    private variable l_arrOptionsOrderDescriptions[];
    private variable l_strLoadingMode;
    private dialog customDialog_1;
    private dialog customDialog_2;
    private dialog customDialog_3;
    private variable l_intDialogReturn;
    private variable intDialogReturn;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    DATA_CONTROLLER::PROCESS::SETUP_CHANNELS = ASWGLOBAL::BOOL::FALSE;
    DATA_CONTROLLER::PROCESS::SETUP_CHANNELS_XL = ASWGLOBAL::BOOL::FALSE;
    DATA_CONTROLLER::PROCESS::SETUP_MPH = ASWGLOBAL::BOOL::FALSE;
    l_blnInvisible = ASWGLOBAL::BOOL::FALSE;
    l_strImageInstrument = Translate("");
    l_strImageOption1 = Translate("");
    l_strImageOption2 = Translate("");
    l_strImageOption3 = Translate("");
    l_strDescriptionInstrument = Translate("");
    l_strDescriptionOption1 = Translate("");
    l_strDescriptionOption2 = Translate("");
    l_strDescriptionOption3 = Translate("");
    l_strImageName1mLChannel = Translate("1mL Channels");
    l_strImageName5mLChannel = Translate("5mL Channels");
    l_strImageNameMPH = Translate("MPH96");
    l_strImageNameSTAR = Translate("STAR");
    l_strImageNameSTARlet = Translate("STARlet");
    l_strImageNameSTARPlus = Translate("STARPlus");
    l_strImageNameVantage2_0 = Translate("Vantage2.0");
    l_strImageNameVantage1_3 = Translate("Vantage1.3");
    l_intTotalOptions = 0;
    l_arrOptionsOrder.SetSize(0);
    l_arrOptionsOrderDescriptions.SetSize(0);
    if (DATA_CONTROLLER::SYSTEM::CHANNEL == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalOptions = l_intTotalOptions + 1;
      l_arrOptionsOrder.AddAsLast(l_strImageName1mLChannel);
      l_arrOptionsOrderDescriptions.AddAsLast(Translate("1mL Channels"));
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_XL == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalOptions = l_intTotalOptions + 1;
      l_arrOptionsOrder.AddAsLast(l_strImageName5mLChannel);
      l_arrOptionsOrderDescriptions.AddAsLast(Translate("5mL Channels"));
    }
    if (DATA_CONTROLLER::SYSTEM::MPH96 == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalOptions = l_intTotalOptions + 1;
      l_arrOptionsOrder.AddAsLast(l_strImageNameMPH);
      l_arrOptionsOrderDescriptions.AddAsLast(Translate("96 head (1mL)"));
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImageInstrument = l_strImageNameSTARlet;
      l_strDescriptionInstrument = Translate("Microlab ® STARlet");
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImageInstrument = l_strImageNameSTAR;
      l_strDescriptionInstrument = Translate("Microlab ® STAR");
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImageInstrument = l_strImageNameSTARPlus;
      l_strDescriptionInstrument = Translate("Microlab ® STARPlus");
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_13 == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImageInstrument = l_strImageNameVantage1_3;
      l_strDescriptionInstrument = Translate("Microlab ® Vantage 1.3m");
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_20 == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImageInstrument = l_strImageNameVantage2_0;
      l_strDescriptionInstrument = Translate("Microlab ® Vantage 2.0m");
    }
    l_strImageOption1 = l_arrOptionsOrder.ElementAt( 1 -1);
    l_strDescriptionOption1 = l_arrOptionsOrderDescriptions.ElementAt( 1 -1);
    if (l_intTotalOptions >= 2)
    {
      l_strImageOption2 = l_arrOptionsOrder.ElementAt( 2 -1);
      l_strDescriptionOption2 = l_arrOptionsOrderDescriptions.ElementAt( 2 -1);
    }
    if (l_intTotalOptions == 3)
    {
      l_strImageOption3 = l_arrOptionsOrder.ElementAt( 3 -1);
      l_strDescriptionOption3 = l_arrOptionsOrderDescriptions.ElementAt( 3 -1);
    }
    if (DATA_CONTROLLER::SYSTEM::AUTOLOAD == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLoadingMode = Translate("Automatic");
    }
    else
    {
      l_strLoadingMode = Translate("Manual");
    }
    _UpdateStatus(l_strDescriptionInstrument, ASWGLOBAL::BOOL::TRUE);
    if (l_intTotalOptions == 1)
    {
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogProperty( "image4.Source", l_strImageInstrument );
      customDialog_2.SetCustomDialogProperty( "Image2.Source", l_strImageOption1 );
      customDialog_2.SetCustomDialogProperty( "textBlock2.Text", l_strDescriptionInstrument );
      customDialog_2.SetCustomDialogProperty( "Description2.Text", l_strDescriptionOption1 );
      customDialog_2.SetCustomDialogProperty( "numeric1.IsVisible", l_blnInvisible );
      customDialog_2.SetCustomDialogProperty( "textBlock5.Text", DATA_CONTROLLER::STR::SERIAL_NUMBER );
      customDialog_2.SetCustomDialogProperty( "textBlock7.Text", l_strLoadingMode );
      customDialog_2.ShowCustomDialog();
      l_intDialogReturn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      l_intOptionSelection = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
    }
    if (l_intTotalOptions == 2)
    {
      customDialog_3.InitCustomDialog("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");
      customDialog_3.SetCustomDialogProperty( "image4.Source", l_strImageInstrument );
      customDialog_3.SetCustomDialogProperty( "Image1.Source", l_strImageOption1 );
      customDialog_3.SetCustomDialogProperty( "Image2.Source", l_strImageOption2 );
      customDialog_3.SetCustomDialogProperty( "textBlock2.Text", l_strDescriptionInstrument );
      customDialog_3.SetCustomDialogProperty( "Description1.Text", l_strDescriptionOption1 );
      customDialog_3.SetCustomDialogProperty( "Description2.Text", l_strDescriptionOption2 );
      customDialog_3.SetCustomDialogProperty( "numeric1.IsVisible", l_blnInvisible );
      customDialog_3.SetCustomDialogProperty( "textBlock5.Text", DATA_CONTROLLER::STR::SERIAL_NUMBER );
      customDialog_3.SetCustomDialogProperty( "textBlock7.Text", l_strLoadingMode );
      customDialog_3.ShowCustomDialog();
      intDialogReturn = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
      l_intOptionSelection = customDialog_3.GetCustomDialogProperty( "numeric1.Value" );
    }
    if (l_intTotalOptions == 3)
    {
      customDialog_1.InitCustomDialog("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");
      customDialog_1.SetCustomDialogProperty( "image4.Source", l_strImageInstrument );
      customDialog_1.SetCustomDialogProperty( "Image1.Source", l_strImageOption1 );
      customDialog_1.SetCustomDialogProperty( "Image2.Source", l_strImageOption2 );
      customDialog_1.SetCustomDialogProperty( "Image3.Source", l_strImageOption3 );
      customDialog_1.SetCustomDialogProperty( "textBlock2.Text", l_strDescriptionInstrument );
      customDialog_1.SetCustomDialogProperty( "Description1.Text", l_strDescriptionOption1 );
      customDialog_1.SetCustomDialogProperty( "Description2.Text", l_strDescriptionOption2 );
      customDialog_1.SetCustomDialogProperty( "Description3.Text", l_strDescriptionOption3 );
      customDialog_1.SetCustomDialogProperty( "numeric1.IsVisible", l_blnInvisible );
      customDialog_1.SetCustomDialogProperty( "textBlock5.Text", DATA_CONTROLLER::STR::SERIAL_NUMBER );
      customDialog_1.SetCustomDialogProperty( "textBlock7.Text", l_strLoadingMode );
      customDialog_1.ShowCustomDialog();
      intDialogReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      l_intOptionSelection = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    }
    if (intDialogReturn == 3)
    {
      abort;
    }
    if (l_arrOptionsOrder.ElementAt( l_intOptionSelection -1) == l_strImageName1mLChannel)
    {
      DATA_CONTROLLER::PROCESS::SETUP_CHANNELS = ASWGLOBAL::BOOL::TRUE;
      _UpdateStatus(Translate("1mL Channels"), ASWGLOBAL::BOOL::TRUE);
    }
    if (l_arrOptionsOrder.ElementAt( l_intOptionSelection -1) == l_strImageName5mLChannel)
    {
      DATA_CONTROLLER::PROCESS::SETUP_CHANNELS_XL = ASWGLOBAL::BOOL::TRUE;
      _UpdateStatus(Translate("5mL Channels"), ASWGLOBAL::BOOL::TRUE);
    }
    if (l_arrOptionsOrder.ElementAt( l_intOptionSelection -1) == l_strImageNameMPH)
    {
      DATA_CONTROLLER::PROCESS::SETUP_MPH = ASWGLOBAL::BOOL::TRUE;
      _UpdateStatus(Translate("MPH96 Channels"), ASWGLOBAL::BOOL::TRUE);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function SHOW_TipOptions(  ) variable {
    private variable l_arrConfigsTips[];
    private variable l_intConfigSize;
    private variable l_arrTipSizes[];
    private dialog customDialog_4;
    private variable l_intTipSizeSelection;
    private variable l_intDialogReturn;
    private variable l_intOptionSelection;
    private variable l_blnInvisible;
    private variable l_blnContinue;
    private variable l_intStyleSelection;
    private variable l_strFunctionName;
    private dialog customDialog_5;
    private variable l_blnSkipBaseline;
    private variable l_blnDiluentOnly;
    private variable l_intBaselineSelection;
    private variable l_strCurrentDay;
    private variable l_strLastBaselineDay;
    private variable l_strTipSelectionDescription;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    l_intStyleSelection = 1;
    l_intBaselineSelection = 1;
    l_blnDiluentOnly = ASWGLOBAL::BOOL::FALSE;
    l_blnAddRange = ASWGLOBAL::BOOL::TRUE;
    l_blnMakeBaseline = ASWGLOBAL::BOOL::TRUE;
    l_blnSkipBaseline = ASWGLOBAL::BOOL::FALSE;
    DATA_CONTROLLER::BLN::TIPS_NONFILTER = ASWGLOBAL::BOOL::TRUE;
    DATA_CONTROLLER::BLN::TIPS_FILTER = ASWGLOBAL::BOOL::FALSE;
    DATA_CONTROLLER::BLN::TIPS_STERILE = ASWGLOBAL::BOOL::FALSE;
    l_blnContinue = ASWGLOBAL::BOOL::TRUE;
    l_strLastBaselineDay = Translate("xx/xx/xxxx");
    l_strCurrentDay = TimGetFormattedDate(Translate("%m/%d/%Y"));
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationArray(Translate("TipConfigs"), Translate("s"), l_arrConfigsTips, l_intConfigSize);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationArray(Translate("TipConfigsMPH"), Translate("s"), l_arrConfigsTips, l_intConfigSize);
    }
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("TipSizes"), Translate("s"), l_arrTipSizes, l_intConfigSize);
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigRunSelections"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("DateBaseline"), l_strLastBaselineDay);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("TipSizeUsed"), l_intTipSizeSelection);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("TipStyleUsed"), l_intStyleSelection);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("AddRangeSolution"), l_blnAddRange);
    if (l_intStyleSelection == 1)
    {
      DATA_CONTROLLER::BLN::TIPS_NONFILTER = ASWGLOBAL::BOOL::TRUE;
      DATA_CONTROLLER::BLN::TIPS_FILTER = ASWGLOBAL::BOOL::FALSE;
      DATA_CONTROLLER::BLN::TIPS_STERILE = ASWGLOBAL::BOOL::FALSE;
    }
    if (l_intStyleSelection == 2)
    {
      DATA_CONTROLLER::BLN::TIPS_NONFILTER = ASWGLOBAL::BOOL::FALSE;
      DATA_CONTROLLER::BLN::TIPS_FILTER = ASWGLOBAL::BOOL::TRUE;
      DATA_CONTROLLER::BLN::TIPS_STERILE = ASWGLOBAL::BOOL::FALSE;
    }
    if (l_intStyleSelection == 3)
    {
      DATA_CONTROLLER::BLN::TIPS_NONFILTER = ASWGLOBAL::BOOL::FALSE;
      DATA_CONTROLLER::BLN::TIPS_FILTER = ASWGLOBAL::BOOL::FALSE;
      DATA_CONTROLLER::BLN::TIPS_STERILE = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_strCurrentDay != l_strLastBaselineDay)
    {
      l_intBaselineSelection = 1;
    }
    else
    {
      l_intBaselineSelection = 2;
    }
    if (l_intBaselineSelection == 1)
    {
      l_blnMakeBaseline = ASWGLOBAL::BOOL::TRUE;
      l_blnSkipBaseline = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      l_blnMakeBaseline = ASWGLOBAL::BOOL::FALSE;
      l_blnSkipBaseline = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_blnAddRange == ASWGLOBAL::BOOL::TRUE)
    {
      l_blnDiluentOnly = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      l_blnDiluentOnly = ASWGLOBAL::BOOL::TRUE;
    }
    if(0){
      customDialog_4.InitCustomDialog("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");
      customDialog_4.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", l_arrTipSizes );
      customDialog_4.SetCustomDialogProperty( "numeric1.IsVisible", l_blnInvisible );
      customDialog_4.SetCustomDialogProperty( "numeric2.IsVisible", l_blnInvisible );
      customDialog_4.ShowCustomDialog();
      l_intDialogReturn = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      l_intOptionSelection = customDialog_4.GetCustomDialogProperty( "numeric1.Value" );
      l_intTipSizeSelection = customDialog_4.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
      l_intStyleSelection = customDialog_4.GetCustomDialogProperty( "numeric2.Value" );
    }
    _UpdateStatus(Translate("Choosing analysis options..."), ASWGLOBAL::BOOL::FALSE);
    customDialog_5.InitCustomDialog("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");
    customDialog_5.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", l_arrTipSizes );
    customDialog_5.SetCustomDialogProperty( "MakeBaseline.IsChecked", l_blnMakeBaseline );
    customDialog_5.SetCustomDialogProperty( "DontMakeBaseline.IsChecked", l_blnSkipBaseline );
    customDialog_5.SetCustomDialogProperty( "radioButton1.IsChecked", DATA_CONTROLLER::BLN::TIPS_FILTER );
    customDialog_5.SetCustomDialogProperty( "radioButton2.IsChecked", DATA_CONTROLLER::BLN::TIPS_NONFILTER );
    customDialog_5.SetCustomDialogProperty( "radioButton3.IsChecked", DATA_CONTROLLER::BLN::TIPS_STERILE );
    customDialog_5.SetCustomDialogProperty( "radioButton4.IsChecked", l_blnAddRange );
    customDialog_5.SetCustomDialogProperty( "radioButton5.IsChecked", l_blnDiluentOnly );
    customDialog_5.SetCustomDialogProperty( "comboBox1.SelectedIndex", l_intTipSizeSelection );
    customDialog_5.ShowCustomDialog();
    l_intDialogReturn = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    l_blnMakeBaseline = customDialog_5.GetCustomDialogProperty( "MakeBaseline.IsChecked" );
    l_blnSkipBaseline = customDialog_5.GetCustomDialogProperty( "DontMakeBaseline.IsChecked" );
    DATA_CONTROLLER::BLN::TIPS_FILTER = customDialog_5.GetCustomDialogProperty( "radioButton1.IsChecked" );
    DATA_CONTROLLER::BLN::TIPS_NONFILTER = customDialog_5.GetCustomDialogProperty( "radioButton2.IsChecked" );
    DATA_CONTROLLER::BLN::TIPS_STERILE = customDialog_5.GetCustomDialogProperty( "radioButton3.IsChecked" );
    l_blnAddRange = customDialog_5.GetCustomDialogProperty( "radioButton4.IsChecked" );
    l_blnDiluentOnly = customDialog_5.GetCustomDialogProperty( "radioButton5.IsChecked" );
    l_intTipSizeSelection = customDialog_5.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
    if (l_blnMakeBaseline == ASWGLOBAL::BOOL::TRUE)
    {
      DATA_CONTROLLER::PROCESS::PREPARE_VERIFICATION_PLATE = ASWGLOBAL::BOOL::TRUE;
      MECC::TraceComment(Translate("CREATE BASELINE PLATE!"));
      _UpdateStatus(Translate("Create baseline plate"), ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      DATA_CONTROLLER::PROCESS::PREPARE_VERIFICATION_PLATE = ASWGLOBAL::BOOL::FALSE;
      MECC::TraceComment(Translate("DO NOT CREATE BASELINE PLATE!"));
    }
    if (l_blnAddRange == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("FULL PROCESS!"));
      DATA_CONTROLLER::PROCESS::SETUP_RANGE = ASWGLOBAL::BOOL::TRUE;
      DATA_CONTROLLER::PROCESS::SETUP_DILUENT = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      MECC::TraceComment(Translate("DILUENT ONLY!"));
      DATA_CONTROLLER::PROCESS::SETUP_RANGE = ASWGLOBAL::BOOL::FALSE;
      DATA_CONTROLLER::PROCESS::SETUP_DILUENT = ASWGLOBAL::BOOL::TRUE;
      _UpdateStatus(Translate("Only add diluent!"), ASWGLOBAL::BOOL::TRUE);
    }
    if (DATA_CONTROLLER::BLN::TIPS_NONFILTER == ASWGLOBAL::BOOL::TRUE)
    {
      l_intStyleSelection = 1;
      MECC::TraceComment(Translate("TIPS ARE NON-FILTERED!"));
      l_strTipSelectionDescription = StrConcat4(l_arrTipSizes.ElementAt( l_intTipSizeSelection -1), Translate(" "), Translate("non filtered tips"), Translate(""));
    }
    if (DATA_CONTROLLER::BLN::TIPS_FILTER == ASWGLOBAL::BOOL::TRUE)
    {
      l_intStyleSelection = 2;
      MECC::TraceComment(Translate("TIPS ARE FILTERED!"));
      l_strTipSelectionDescription = StrConcat4(l_arrTipSizes.ElementAt( l_intTipSizeSelection -1), Translate(" "), Translate("filtered tips"), Translate(""));
    }
    if (DATA_CONTROLLER::BLN::TIPS_STERILE == ASWGLOBAL::BOOL::TRUE)
    {
      l_intStyleSelection = 3;
      MECC::TraceComment(Translate("TIPS ARE STERILE!"));
      l_strTipSelectionDescription = StrConcat4(l_arrTipSizes.ElementAt( l_intTipSizeSelection -1), Translate(" "), Translate("sterile tips"), Translate(""));
    }
    _UpdateStatus(l_strTipSelectionDescription, ASWGLOBAL::BOOL::TRUE);
    DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME=l_arrConfigsTips.GetAt(l_intTipSizeSelection-1);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Config File To Use:  "), DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME, Translate(""));
    if (l_intDialogReturn == ASWGLOBAL::DIALOG::ABORT)
    {
      l_blnContinue = ASWGLOBAL::BOOL::FALSE;
    }
    if (l_blnContinue == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::SetConfigurationValue(Translate("TipSizeUsed"), l_intTipSizeSelection, ASWGLOBAL::BOOL::FALSE);
      CONFIGURATIONEDITOR::SetConfigurationValue(Translate("TipStyleUsed"), l_intStyleSelection, ASWGLOBAL::BOOL::FALSE);
      CONFIGURATIONEDITOR::SetConfigurationValue(Translate("AddRangeSolution"), l_blnAddRange, ASWGLOBAL::BOOL::TRUE);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return (l_blnContinue);
  }

  function SHOW_ChannelOptions(  ) variable {
    private variable l_blnContinue;
    private variable l_intDialogReturn;
    private variable l_blnEnableCh1;
    private variable l_blnEnableCh2;
    private variable l_blnEnableCh3;
    private variable l_blnEnableCh4;
    private variable l_blnEnableCh5;
    private variable l_blnEnableCh6;
    private variable l_blnEnableCh7;
    private variable l_blnEnableCh8;
    private variable l_blnEnableCh9;
    private variable l_blnEnableCh10;
    private variable l_blnEnableCh11;
    private variable l_blnEnableCh12;
    private variable l_blnEnableCh13;
    private variable l_blnEnableCh14;
    private variable l_blnEnableCh15;
    private variable l_blnEnableCh16;
    private variable l_blnValueCh1;
    private variable l_blnValueCh2;
    private variable l_blnValueCh3;
    private variable l_blnValueCh4;
    private variable l_blnValueCh5;
    private variable l_blnValueCh6;
    private variable l_blnValueCh7;
    private variable l_blnValueCh8;
    private variable l_blnValueCh9;
    private variable l_blnValueCh10;
    private variable l_blnValueCh11;
    private variable l_blnValueCh12;
    private variable l_blnValueCh13;
    private variable l_blnValueCh14;
    private variable l_blnValueCh15;
    private variable l_blnValueCh16;
    private variable l_strProcessPattern;
    private variable l_intTotalEnabled;
    private dialog customDialog_6;
    private dialog customDialog_7;
    private dialog customDialog_8;
    private dialog customDialog_9;
    private variable l_strFunctionName;
    l_blnContinue = ASWGLOBAL::BOOL::TRUE;
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::FALSE)
    {
      return (l_blnContinue);
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER <= 8)
    {
      DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN = Translate("");
      DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN = StrFillLeft(DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN, Translate("1"), DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER);
      DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN = StrFillRight(DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN, Translate("0"), 16);
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Channel Pattern:  "), DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN, Translate(""));
      return (l_blnContinue);
    }
    l_blnValueCh1 = ASWGLOBAL::BOOL::TRUE;
    l_blnValueCh2 = ASWGLOBAL::BOOL::TRUE;
    l_blnValueCh3 = ASWGLOBAL::BOOL::TRUE;
    l_blnValueCh4 = ASWGLOBAL::BOOL::TRUE;
    l_blnValueCh5 = ASWGLOBAL::BOOL::TRUE;
    l_blnValueCh6 = ASWGLOBAL::BOOL::TRUE;
    l_blnValueCh7 = ASWGLOBAL::BOOL::TRUE;
    l_blnValueCh8 = ASWGLOBAL::BOOL::TRUE;
    l_blnValueCh9 = ASWGLOBAL::BOOL::FALSE;
    l_blnValueCh10 = ASWGLOBAL::BOOL::FALSE;
    l_blnValueCh11 = ASWGLOBAL::BOOL::FALSE;
    l_blnValueCh12 = ASWGLOBAL::BOOL::FALSE;
    l_blnValueCh13 = ASWGLOBAL::BOOL::FALSE;
    l_blnValueCh14 = ASWGLOBAL::BOOL::FALSE;
    l_blnValueCh15 = ASWGLOBAL::BOOL::FALSE;
    l_blnValueCh16 = ASWGLOBAL::BOOL::FALSE;
    l_blnEnableCh1 = ASWGLOBAL::BOOL::TRUE;
    l_blnEnableCh2 = ASWGLOBAL::BOOL::TRUE;
    l_blnEnableCh3 = ASWGLOBAL::BOOL::TRUE;
    l_blnEnableCh4 = ASWGLOBAL::BOOL::TRUE;
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 5)
    {
      l_blnEnableCh5 = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 6)
    {
      l_blnEnableCh6 = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 7)
    {
      l_blnEnableCh7 = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 8)
    {
      l_blnEnableCh8 = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 9)
    {
      l_blnEnableCh9 = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 10)
    {
      l_blnEnableCh10 = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 11)
    {
      l_blnEnableCh11 = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 12)
    {
      l_blnEnableCh12 = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 13)
    {
      l_blnEnableCh13 = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 14)
    {
      l_blnEnableCh14 = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 15)
    {
      l_blnEnableCh15 = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER >= 16)
    {
      l_blnEnableCh16 = ASWGLOBAL::BOOL::TRUE;
    }
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER == 12)
        {
          customDialog_7.InitCustomDialog("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");
          customDialog_7.SetCustomDialogProperty( "checkBox1.IsChecked", l_blnValueCh1 );
          customDialog_7.SetCustomDialogProperty( "checkBox1.IsEnabled", l_blnEnableCh1 );
          customDialog_7.SetCustomDialogProperty( "checkBox2.IsChecked", l_blnValueCh2 );
          customDialog_7.SetCustomDialogProperty( "checkBox2.IsEnabled", l_blnEnableCh2 );
          customDialog_7.SetCustomDialogProperty( "checkBox3.IsChecked", l_blnValueCh3 );
          customDialog_7.SetCustomDialogProperty( "checkBox3.IsEnabled", l_blnEnableCh3 );
          customDialog_7.SetCustomDialogProperty( "checkBox4.IsEnabled", l_blnEnableCh4 );
          customDialog_7.SetCustomDialogProperty( "checkBox4.IsChecked", l_blnValueCh4 );
          customDialog_7.SetCustomDialogProperty( "checkBox5.IsEnabled", l_blnEnableCh5 );
          customDialog_7.SetCustomDialogProperty( "checkBox5.IsChecked", l_blnValueCh5 );
          customDialog_7.SetCustomDialogProperty( "checkBox6.IsChecked", l_blnValueCh6 );
          customDialog_7.SetCustomDialogProperty( "checkBox6.IsEnabled", l_blnEnableCh6 );
          customDialog_7.SetCustomDialogProperty( "checkBox7.IsEnabled", l_blnEnableCh7 );
          customDialog_7.SetCustomDialogProperty( "checkBox7.IsChecked", l_blnValueCh7 );
          customDialog_7.SetCustomDialogProperty( "checkBox8.IsEnabled", l_blnEnableCh8 );
          customDialog_7.SetCustomDialogProperty( "checkBox8.IsChecked", l_blnValueCh8 );
          customDialog_7.SetCustomDialogProperty( "checkBox9.IsChecked", l_blnValueCh9 );
          customDialog_7.SetCustomDialogProperty( "checkBox9.IsEnabled", l_blnEnableCh9 );
          customDialog_7.SetCustomDialogProperty( "checkBox10.IsChecked", l_blnValueCh10 );
          customDialog_7.SetCustomDialogProperty( "checkBox10.IsEnabled", l_blnEnableCh10 );
          customDialog_7.SetCustomDialogProperty( "checkBox11.IsChecked", l_blnValueCh11 );
          customDialog_7.SetCustomDialogProperty( "checkBox11.IsEnabled", l_blnEnableCh11 );
          customDialog_7.SetCustomDialogProperty( "checkBox12.IsEnabled", l_blnEnableCh12 );
          customDialog_7.SetCustomDialogProperty( "checkBox12.IsChecked", l_blnValueCh12 );
          customDialog_7.ShowCustomDialog();
          l_intDialogReturn = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
          l_blnValueCh1 = customDialog_7.GetCustomDialogProperty( "checkBox1.IsChecked" );
          l_blnValueCh2 = customDialog_7.GetCustomDialogProperty( "checkBox2.IsChecked" );
          l_blnValueCh3 = customDialog_7.GetCustomDialogProperty( "checkBox3.IsChecked" );
          l_blnValueCh4 = customDialog_7.GetCustomDialogProperty( "checkBox4.IsChecked" );
          l_blnValueCh5 = customDialog_7.GetCustomDialogProperty( "checkBox5.IsChecked" );
          l_blnValueCh6 = customDialog_7.GetCustomDialogProperty( "checkBox6.IsChecked" );
          l_blnValueCh7 = customDialog_7.GetCustomDialogProperty( "checkBox7.IsChecked" );
          l_blnValueCh8 = customDialog_7.GetCustomDialogProperty( "checkBox8.IsChecked" );
          l_blnValueCh9 = customDialog_7.GetCustomDialogProperty( "checkBox9.IsChecked" );
          l_blnValueCh10 = customDialog_7.GetCustomDialogProperty( "checkBox10.IsChecked" );
          l_blnValueCh11 = customDialog_7.GetCustomDialogProperty( "checkBox11.IsChecked" );
          l_blnValueCh12 = customDialog_7.GetCustomDialogProperty( "checkBox12.IsChecked" );
        }
        if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER == 16)
        {
          customDialog_6.InitCustomDialog("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");
          customDialog_6.SetCustomDialogProperty( "checkBox1.IsChecked", l_blnValueCh1 );
          customDialog_6.SetCustomDialogProperty( "checkBox1.IsEnabled", l_blnEnableCh1 );
          customDialog_6.SetCustomDialogProperty( "checkBox2.IsChecked", l_blnValueCh2 );
          customDialog_6.SetCustomDialogProperty( "checkBox2.IsEnabled", l_blnEnableCh2 );
          customDialog_6.SetCustomDialogProperty( "checkBox3.IsChecked", l_blnValueCh3 );
          customDialog_6.SetCustomDialogProperty( "checkBox3.IsEnabled", l_blnEnableCh3 );
          customDialog_6.SetCustomDialogProperty( "checkBox4.IsEnabled", l_blnEnableCh4 );
          customDialog_6.SetCustomDialogProperty( "checkBox4.IsChecked", l_blnValueCh4 );
          customDialog_6.SetCustomDialogProperty( "checkBox5.IsEnabled", l_blnEnableCh5 );
          customDialog_6.SetCustomDialogProperty( "checkBox5.IsChecked", l_blnValueCh5 );
          customDialog_6.SetCustomDialogProperty( "checkBox6.IsChecked", l_blnValueCh6 );
          customDialog_6.SetCustomDialogProperty( "checkBox6.IsEnabled", l_blnEnableCh6 );
          customDialog_6.SetCustomDialogProperty( "checkBox7.IsEnabled", l_blnEnableCh7 );
          customDialog_6.SetCustomDialogProperty( "checkBox7.IsChecked", l_blnValueCh7 );
          customDialog_6.SetCustomDialogProperty( "checkBox8.IsEnabled", l_blnEnableCh8 );
          customDialog_6.SetCustomDialogProperty( "checkBox8.IsChecked", l_blnValueCh8 );
          customDialog_6.SetCustomDialogProperty( "checkBox9.IsEnabled", l_blnEnableCh9 );
          customDialog_6.SetCustomDialogProperty( "checkBox9.IsChecked", l_blnValueCh9 );
          customDialog_6.SetCustomDialogProperty( "checkBox10.IsChecked", l_blnValueCh10 );
          customDialog_6.SetCustomDialogProperty( "checkBox10.IsEnabled", l_blnEnableCh10 );
          customDialog_6.SetCustomDialogProperty( "checkBox11.IsChecked", l_blnValueCh11 );
          customDialog_6.SetCustomDialogProperty( "checkBox11.IsEnabled", l_blnEnableCh11 );
          customDialog_6.SetCustomDialogProperty( "checkBox12.IsChecked", l_blnValueCh12 );
          customDialog_6.SetCustomDialogProperty( "checkBox12.IsEnabled", l_blnEnableCh12 );
          customDialog_6.SetCustomDialogProperty( "checkBox13.IsChecked", l_blnValueCh13 );
          customDialog_6.SetCustomDialogProperty( "checkBox13.IsEnabled", l_blnEnableCh13 );
          customDialog_6.SetCustomDialogProperty( "checkBox14.IsEnabled", l_blnEnableCh14 );
          customDialog_6.SetCustomDialogProperty( "checkBox14.IsChecked", l_blnValueCh14 );
          customDialog_6.SetCustomDialogProperty( "checkBox15.IsChecked", l_blnValueCh15 );
          customDialog_6.SetCustomDialogProperty( "checkBox15.IsEnabled", l_blnEnableCh15 );
          customDialog_6.SetCustomDialogProperty( "checkBox16.IsEnabled", l_blnEnableCh16 );
          customDialog_6.SetCustomDialogProperty( "checkBox16.IsChecked", l_blnValueCh16 );
          customDialog_6.ShowCustomDialog();
          l_intDialogReturn = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
          l_blnValueCh1 = customDialog_6.GetCustomDialogProperty( "checkBox1.IsChecked" );
          l_blnValueCh2 = customDialog_6.GetCustomDialogProperty( "checkBox2.IsChecked" );
          l_blnValueCh3 = customDialog_6.GetCustomDialogProperty( "checkBox3.IsChecked" );
          l_blnValueCh4 = customDialog_6.GetCustomDialogProperty( "checkBox4.IsChecked" );
          l_blnValueCh5 = customDialog_6.GetCustomDialogProperty( "checkBox5.IsChecked" );
          l_blnValueCh6 = customDialog_6.GetCustomDialogProperty( "checkBox6.IsChecked" );
          l_blnValueCh7 = customDialog_6.GetCustomDialogProperty( "checkBox7.IsChecked" );
          l_blnValueCh8 = customDialog_6.GetCustomDialogProperty( "checkBox8.IsChecked" );
          l_blnValueCh9 = customDialog_6.GetCustomDialogProperty( "checkBox9.IsChecked" );
          l_blnValueCh10 = customDialog_6.GetCustomDialogProperty( "checkBox10.IsChecked" );
          l_blnValueCh11 = customDialog_6.GetCustomDialogProperty( "checkBox11.IsChecked" );
          l_blnValueCh12 = customDialog_6.GetCustomDialogProperty( "checkBox12.IsChecked" );
          l_blnValueCh13 = customDialog_6.GetCustomDialogProperty( "checkBox13.IsChecked" );
          l_blnValueCh14 = customDialog_6.GetCustomDialogProperty( "checkBox14.IsChecked" );
          l_blnValueCh15 = customDialog_6.GetCustomDialogProperty( "checkBox15.IsChecked" );
          l_blnValueCh16 = customDialog_6.GetCustomDialogProperty( "checkBox16.IsChecked" );
        }
        if (l_intDialogReturn == ASWGLOBAL::DIALOG::ABORT)
        {
          break;
        }
        l_strProcessPattern = Translate("");
        if (l_blnValueCh1 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh2 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh3 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh4 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh5 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh6 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh7 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh8 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh9 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh10 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh11 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh12 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh13 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh14 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh15 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        if (l_blnValueCh16 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("1"), Translate(""), Translate(""));
        }
        else
        {
          l_strProcessPattern = StrConcat4(l_strProcessPattern, Translate("0"), Translate(""), Translate(""));
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Channel Pattern:  "), l_strProcessPattern, Translate(""));
        l_intTotalEnabled = StrReplace(l_strProcessPattern, Translate("1"), Translate("1"));
        if (l_intTotalEnabled == 8)
        {
          break;
        }
        if (l_intTotalEnabled == 4)
        {
          break;
        }
        if (l_intTotalEnabled > 8)
        {
          customDialog_8.InitCustomDialog("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");
          customDialog_8.ShowCustomDialog();
          l_intDialogReturn = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          customDialog_9.InitCustomDialog("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");
          customDialog_9.ShowCustomDialog();
          l_intDialogReturn = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
        }
      }
    }
    if (l_intDialogReturn == ASWGLOBAL::DIALOG::ABORT)
    {
      l_blnContinue = ASWGLOBAL::BOOL::FALSE;
    }
    DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN = l_strProcessPattern;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return (l_blnContinue);
  }

  function SHOW_RangeOptions( device & ML_STAR ) variable {
    private variable l_blnContinue;
    private variable l_intTotalRangeSolutions;
    private variable l_arrRangeSolutions[];
    private dialog customDialog_10;
    private variable l_intVolumeSelected;
    private variable l_intDialogReturn;
    private variable l_intTotalRangeVolumes;
    private variable l_arrRangeVolumes[];
    private variable l_intTotalLiquidClasses;
    private variable l_arrLiquidClasses[];
    private variable l_strFunctionName;
    private variable l_intDefaultReplicates;
    l_blnContinue = ASWGLOBAL::BOOL::TRUE;
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::FALSE)
    {
      return (l_blnContinue);
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Replicates"), DATA_CONTROLLER::INT::REPLICATE_NUMBER);
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Solution"), Translate("s"), l_arrRangeSolutions, l_intTotalRangeSolutions);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Volume"), Translate("f"), l_arrRangeVolumes, l_intTotalRangeVolumes);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("LiquidClass"), Translate("s"), l_arrLiquidClasses, l_intTotalLiquidClasses);
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigRunSelections"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("TipVolumeUsed"), l_intVolumeSelected);
    l_intDefaultReplicates = DATA_CONTROLLER::INT::REPLICATE_NUMBER;
    customDialog_10.InitCustomDialog("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");
    customDialog_10.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", l_arrRangeVolumes );
    customDialog_10.SetCustomDialogProperty( "comboBox1.SelectedIndex", l_intVolumeSelected );
    customDialog_10.SetCustomDialogProperty( "numeric1.Value", DATA_CONTROLLER::INT::REPLICATE_NUMBER );
    customDialog_10.SetCustomDialogProperty( "numeric1.Maximum", DATA_CONTROLLER::INT::REPLICATE_NUMBER );
    customDialog_10.ShowCustomDialog();
    l_intDialogReturn = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
    l_intVolumeSelected = customDialog_10.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
    DATA_CONTROLLER::INT::REPLICATE_NUMBER = customDialog_10.GetCustomDialogProperty( "numeric1.Value" );
    DATA_CONTROLLER::STR::SELECTED_RANGE_SOLUTION=l_arrRangeSolutions.GetAt(l_intVolumeSelected-1);
    DATA_CONTROLLER::FLT::SELECTED_RANGE_VOLUME=l_arrRangeVolumes.GetAt(l_intVolumeSelected-1);
    DATA_CONTROLLER::STR::SELECTED_RANGE_LIQUIDCLASS=l_arrLiquidClasses.GetAt(l_intVolumeSelected-1);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), DATA_CONTROLLER::STR::SELECTED_RANGE_SOLUTION, Translate(" :: "), DATA_CONTROLLER::FLT::SELECTED_RANGE_VOLUME);
    if (l_intDefaultReplicates != DATA_CONTROLLER::INT::REPLICATE_NUMBER)
    {
      DATA_CONTROLLER::BLN::OVERIDE_REPLICATES = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      DATA_CONTROLLER::BLN::OVERIDE_REPLICATES = ASWGLOBAL::BOOL::FALSE;
    }
    if (l_intDialogReturn == ASWGLOBAL::DIALOG::ABORT)
    {
      l_blnContinue = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      CONFIGURATIONEDITOR::SetConfigurationValue(Translate("TipVolumeUsed"), l_intVolumeSelected, ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return (l_blnContinue);
  }

  function LOAD_Tips( device & ML_STAR ) void {
    private sequence l_seqPositionsToLoad;
    private variable l_arrLabwareIDs[];
    private variable l_intTotalLabware;
    private variable l_intIndex;
    private variable l_strLabID;
    private variable l_arrCarriers[];
    private variable l_strCarrier;
    private variable l_strCarrierSite;
    private variable l_intTotalCarriers;
    private variable l_intCarrierIndex;
    private variable l_strCarrierToLoad;
    private variable l_strSitesToScan;
    private variable l_strCarrierLabelName;
    private variable l_arrBarcodeMasks[];
    private variable l_strBarcodeMask;
    private variable l_strCarrierMask;
    private variable l_intLeftTrack;
    private variable l_intRightTrack;
    private variable l_intTotalTracks;
    private variable l_strTracksDescription;
    private variable l_intCarrierCheck;
    private variable l_strBarcodeMasks;
    private variable l_strBarcodeScanned;
    private variable l_strBarcodePositions;
    private variable l_strSite1;
    private variable l_strSite2;
    private variable l_strSite3;
    private variable l_strSite4;
    private variable l_strSite5;
    private variable l_intTipType;
    private variable l_intDialogReturn;
    private variable l_strBarcode1;
    private variable l_strBarcode2;
    private variable l_strBarcode3;
    private variable l_strBarcode4;
    private variable l_strBarcode5;
    private variable l_blnEnable1;
    private variable l_blnEnable2;
    private variable l_blnEnable3;
    private variable l_blnEnable4;
    private variable l_blnEnable5;
    private variable l_arrLabwareToLoad[];
    private variable l_strPlateDescription;
    private variable l_arrLabwareVisState[];
    private variable l_arrLabware[];
    private variable l_arrBarcodesScanned[];
    private variable l_intDeckID;
    private variable l_intElementID;
    private variable l_strBarcode;
    private variable l_intLineIndex;
    private variable l_blnFileExists;
    private variable l_intPlatesScanned;
    private variable l_intPlateIndex;
    private variable l_blnLabwareValid;
    private variable l_strIndex;
    private variable l_intTotalRange;
    private variable l_intTotalBase;
    private variable l_strFunctionName;
    private variable l_intTimeout;
    private variable l_strCarrierInfo;
    private variable l_blnBarcodeValidation;
    private dialog customDialog_11;
    private dialog customDialog_12;
    private dialog customDialog_13;
    private variable l_blnNull;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    l_blnBarcodeValidation = ASWGLOBAL::BOOL::FALSE;
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("EnableBarcodeValdation"), l_blnBarcodeValidation);
    t_intRemainingTipsSamples = 0;
    l_strPlateDescription = Translate("Fresh Artel Plate");
    l_intDeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
    SeqRemoveAll(l_seqPositionsToLoad);
    if(0){
      DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION.SetCount(DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE);
      DATA_CONTROLLER::SEQ::TIPS_300BASE.SetCount(DATA_CONTROLLER::INT::TIPS_NEEDED_REAGENT);
    }
    _UpdateStatus(Translate("Load tips..."), ASWGLOBAL::BOOL::FALSE);
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTimeout = -1;
      if (DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE == 0)
      {
        l_intTimeout = 0;
      }
      STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_SAMPLES, l_intTimeout);
      STAR_TIP_TOOLS::TipCheck(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_SAMPLES, DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE);
      l_intTimeout = -1;
      if (DATA_CONTROLLER::INT::TIPS_NEEDED_REAGENT == 0)
      {
        l_intTimeout = 0;
      }
      STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_300BASE, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_300BASE, l_intTimeout);
      STAR_TIP_TOOLS::TipCheck(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_300BASE, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_300BASE, DATA_CONTROLLER::INT::TIPS_NEEDED_REAGENT);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalRange = SeqGetTotal(DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION);
      if (l_intTotalRange < DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE)
      {
        DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE_RELOAD = DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE - l_intTotalRange;
        DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE = l_intTotalRange;
        MECC::TraceComment(Translate("RELOAD WILL BE REQUIRED"));
      }
      l_intTimeout = -1;
      if (DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE == 0)
      {
        l_intTimeout = 0;
      }
      STAR_TIP_TOOLS::TipCounter_SetShow(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_SAMPLES, l_intTimeout, 1, DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE);
      l_intTotalBase = SeqGetTotal(DATA_CONTROLLER::SEQ::TIPS_300BASE);
      if (l_intTotalBase < DATA_CONTROLLER::INT::TIPS_NEEDED_REAGENT)
      {
        DATA_CONTROLLER::INT::TIPS_NEEDED_REAGENT = l_intTotalBase;
        MECC::TraceComment(Translate("RELOAD WILL BE REQUIRED"));
      }
      l_intTimeout = -1;
      if (DATA_CONTROLLER::INT::TIPS_NEEDED_REAGENT == 0)
      {
        l_intTimeout = 0;
      }
      STAR_TIP_TOOLS::TipCounter_SetShow(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_300BASE, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_300BASE, l_intTimeout, 1, DATA_CONTROLLER::INT::TIPS_NEEDED_REAGENT);
    }
    l_seqPositionsToLoad = HSLExtensions::Sequence::Concat(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, ASWGLOBAL::BOOL::FALSE);
    l_seqPositionsToLoad = HSLExtensions::Sequence::Concat(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::TIPS_300BASE, ASWGLOBAL::BOOL::FALSE);
    SeqGetLabwareIds(l_seqPositionsToLoad, l_arrLabwareIDs);
    l_intTotalLabware=l_arrLabwareIDs.GetSize();
    l_arrCarriers.SetSize(0);
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
      {
        l_intIndex = l_intIndex + 1;
        l_strLabID=l_arrLabwareIDs.GetAt(l_intIndex-1);
        _GetCarrierAndSiteID(ML_STAR, l_strLabID, l_strCarrier, l_strCarrierSite);
        l_intCarrierCheck = _Lookup(l_arrCarriers, l_strCarrier);
        if (l_intCarrierCheck == 0)
        {
          l_arrCarriers.AddAsLast(l_strCarrier);
        }
      }
    }
    Util2::Debug::TraceArray(Translate("Unique Carriers"), l_arrCarriers);
    Util2::Debug::TraceArray(Translate("Labware to load"), l_arrLabwareIDs);
    l_intTotalCarriers=l_arrCarriers.GetSize();
    l_arrBarcodesScanned.SetSize(0);
    if(0){
      {
        for(l_intCarrierIndex = 0; l_intCarrierIndex < l_intTotalCarriers;)
        {
          l_intCarrierIndex = l_intCarrierIndex + 1;
          l_intTotalLabware=l_arrLabwareIDs.GetSize();
          l_arrBarcodeMasks.SetSize(0);
          l_strCarrierToLoad=l_arrCarriers.GetAt(l_intCarrierIndex-1);
          _GetCarrierTracks(ML_STAR, l_strCarrierToLoad, l_intTotalTracks, l_intLeftTrack, l_intRightTrack);
          l_strTracksDescription = StrConcat4(Translate(""), l_intLeftTrack, Translate(" - "), l_intRightTrack);
          l_strCarrierLabelName = DevGetLabwareData(ML_STAR, l_strCarrierToLoad, Translate("MlStarCarLabelName"));
          DevGetBarcodeData(ML_STAR, l_strCarrierToLoad, Translate(""), l_strCarrierMask);
          l_strSitesToScan = Translate("");
          l_strSite1 = Translate("Empty");
          l_strSite2 = Translate("Empty");
          l_strSite3 = Translate("Empty");
          l_strSite4 = Translate("Empty");
          l_strSite5 = Translate("Empty");
          l_strBarcode1 = Translate("");
          l_strBarcode2 = Translate("");
          l_strBarcode3 = Translate("");
          l_strBarcode4 = Translate("");
          l_strBarcode5 = Translate("");
          l_arrLabwareToLoad.SetSize(5);
          l_arrLabwareToLoad.SetAt(1-1, Translate("EMPTY"));
          l_arrLabwareToLoad.SetAt(2-1, Translate("EMPTY"));
          l_arrLabwareToLoad.SetAt(3-1, Translate("EMPTY"));
          l_arrLabwareToLoad.SetAt(4-1, Translate("EMPTY"));
          l_arrLabwareToLoad.SetAt(5-1, Translate("EMPTY"));
          l_strBarcode1 = Translate("111111111111111111");
          l_strBarcode2 = Translate("111111111111111111");
          l_strBarcode3 = Translate("111111111111111111");
          l_strBarcode4 = Translate("111111111111111111");
          l_strBarcode5 = Translate("111111111111111111");
          l_blnEnable1 = ASWGLOBAL::BOOL::FALSE;
          l_blnEnable2 = ASWGLOBAL::BOOL::FALSE;
          l_blnEnable3 = ASWGLOBAL::BOOL::FALSE;
          l_blnEnable4 = ASWGLOBAL::BOOL::FALSE;
          l_blnEnable5 = ASWGLOBAL::BOOL::FALSE;
          l_arrLabware.SetSize(0);
          l_arrLabwareVisState.SetSize(0);
          {
            for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
            {
              l_intIndex = l_intIndex + 1;
              l_strLabID=l_arrLabwareIDs.GetAt(l_intIndex-1);
              _GetCarrierAndSiteID(ML_STAR, l_strLabID, l_strCarrier, l_strCarrierSite);
              if (l_strCarrier == l_strCarrierToLoad)
              {
                TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Labware:  "), l_strLabID, Translate(""));
                l_intTipType = DevGetLabwareData(ML_STAR, l_strLabID, Translate("MlStarTipRack"));
                DevGetBarcodeData(ML_STAR, l_strLabID, Translate(""), l_strBarcodeMask);
                l_arrBarcodeMasks.AddAsLast(l_strBarcodeMask);
                l_strSitesToScan = StrConcat4(l_strSitesToScan, l_strCarrierSite, Translate(""), Translate(""));
                if (l_intIndex < l_intTotalLabware)
                {
                  l_strSitesToScan = StrConcat4(l_strSitesToScan, Translate(","), Translate(""), Translate(""));
                }
                if (l_strCarrierSite == "1")
                {
                  _GetTipDescription(l_intTipType, l_strSite1);
                  l_arrLabwareToLoad.SetAt(1-1, l_strLabID);
                  l_blnEnable1 = ASWGLOBAL::BOOL::TRUE;
                  l_arrLabware.AddAsLast(l_strLabID);
                  l_arrLabwareVisState.AddAsLast(5);
                }
                if (l_strCarrierSite == "2")
                {
                  _GetTipDescription(l_intTipType, l_strSite2);
                  l_arrLabwareToLoad.SetAt(2-1, l_strLabID);
                  l_blnEnable2 = ASWGLOBAL::BOOL::TRUE;
                  l_arrLabware.AddAsLast(l_strLabID);
                  l_arrLabwareVisState.AddAsLast(5);
                }
                if (l_strCarrierSite == "3")
                {
                  _GetTipDescription(l_intTipType, l_strSite3);
                  l_arrLabwareToLoad.SetAt(3-1, l_strLabID);
                  l_blnEnable3 = ASWGLOBAL::BOOL::TRUE;
                  l_arrLabware.AddAsLast(l_strLabID);
                  l_arrLabwareVisState.AddAsLast(5);
                }
                if (l_strCarrierSite == "4")
                {
                  _GetTipDescription(l_intTipType, l_strSite4);
                  l_arrLabwareToLoad.SetAt(4-1, l_strLabID);
                  l_blnEnable4 = ASWGLOBAL::BOOL::TRUE;
                  l_arrLabware.AddAsLast(l_strLabID);
                  l_arrLabwareVisState.AddAsLast(5);
                }
                if (l_strCarrierSite == "5")
                {
                  _GetTipDescription(l_intTipType, l_strSite5);
                  l_arrLabwareToLoad.SetAt(5-1, l_strLabID);
                  l_blnEnable5 = ASWGLOBAL::BOOL::TRUE;
                  l_arrLabware.AddAsLast(l_strLabID);
                  l_arrLabwareVisState.AddAsLast(5);
                }
              }
            }
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier to Load:  "), l_strCarrierToLoad, Translate(""));
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Sites to Load:  "), l_strSitesToScan, Translate(""));
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier Label Name:  "), l_strCarrierLabelName, Translate(""));
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier Mask:  "), l_strCarrierMask, Translate(""));
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Tracks to load:  "), l_strTracksDescription, Translate(""));
          l_strCarrierInfo = StrConcat4(l_strCarrierLabelName, Translate(" :: Track "), l_strTracksDescription, Translate(""));
          _UpdateStatus(l_strCarrierInfo, ASWGLOBAL::BOOL::TRUE);
          if (DATA_CONTROLLER::SYSTEM::AUTOLOAD == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
            if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            }
            if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            }
            if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            }
            customDialog_11.InitCustomDialog("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");
            customDialog_11.SetCustomDialogProperty( "textBlock7.Text", l_strCarrierLabelName );
            customDialog_11.SetCustomDialogProperty( "textBlock3.Text", l_strSite1 );
            customDialog_11.SetCustomDialogProperty( "textBlock4.Text", l_strSite2 );
            customDialog_11.SetCustomDialogProperty( "textBlock5.Text", l_strSite3 );
            customDialog_11.SetCustomDialogProperty( "textBlock6.Text", l_strSite4 );
            customDialog_11.SetCustomDialogProperty( "textBlock8.Text", l_strSite5 );
            customDialog_11.SetCustomDialogProperty( "textBlock9.Text", l_strTracksDescription );
            customDialog_11.ShowCustomDialog();
            l_intDialogReturn = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              	l_strBarcodeScanned = arrRetValues[3];
              	l_strBarcodeMasks = arrRetValues[4];
              	l_strBarcodePositions = arrRetValues[5];
            }
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Barcode Scanned:  "), l_strBarcodeScanned, Translate(""));
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Barcode Masks:  "), l_strBarcodeMasks, Translate(""));
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Barcode Positions:  "), l_strBarcodePositions, Translate(""));
            l_intTotalLabware=l_arrLabwareToLoad.GetSize();
            {
              for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
              {
                l_intIndex = l_intIndex + 1;
                l_blnLabwareValid = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, l_arrLabwareToLoad.ElementAt( l_intIndex -1));
                if (l_blnLabwareValid == ASWGLOBAL::BOOL::TRUE)
                {
                  if (DATA_CONTROLLER::BLN::SIMULATION_MODE == ASWGLOBAL::BOOL::TRUE)
                  {
                    l_strIndex = StrConcat2(l_intIndex, Translate(""));
                    DevGetBarcodeData(ML_STAR, l_arrLabwareToLoad.ElementAt( l_intIndex -1), Translate(""), l_strBarcodeMask);
                    StrReplace(l_strBarcodeMask, Translate("*"), l_strIndex);
                    Util2::VarArrCheckIndex(l_arrLabwareToLoad, l_intIndex, "l_arrLabwareToLoad");
                    STCC::SetElementBarcode(ML_STAR, l_arrLabwareToLoad.ElementAt(l_intIndex-1), "", l_strBarcodeMask);
                  }
                  l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, l_arrLabwareToLoad.ElementAt( l_intIndex -1));
                  if (l_intElementID != 0)
                  {
                    l_strBarcode = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
                    l_arrBarcodesScanned.AddAsLast(l_strBarcode);
                  }
                }
              }
            }
          }
          else
          {
            Util2::Debug::TraceArray(Translate("Labware to Load"), l_arrLabwareToLoad);
            l_arrLabware.SetSize(0);
            l_arrLabwareVisState.SetSize(0);
            if (l_blnEnable1 == ASWGLOBAL::BOOL::TRUE)
            {
              l_strBarcode1 = Translate("");
            }
            else
            {
              l_strBarcode1 = Translate("000000000000000000");
            }
            if (l_blnEnable2 == ASWGLOBAL::BOOL::TRUE)
            {
              l_strBarcode2 = Translate("");
            }
            else
            {
              l_strBarcode2 = Translate("000000000000000000");
            }
            if (l_blnEnable3 == ASWGLOBAL::BOOL::TRUE)
            {
              l_strBarcode3 = Translate("");
            }
            else
            {
              l_strBarcode3 = Translate("000000000000000000");
            }
            if (l_blnEnable4 == ASWGLOBAL::BOOL::TRUE)
            {
              l_strBarcode4 = Translate("");
            }
            else
            {
              l_strBarcode4 = Translate("000000000000000000");
            }
            if (l_blnEnable5 == ASWGLOBAL::BOOL::TRUE)
            {
              l_strBarcode5 = Translate("");
            }
            else
            {
              l_strBarcode5 = Translate("000000000000000000");
            }
            DeckVisualize::UpdateLoadedLabware(ML_STAR, l_arrLabware, l_arrLabwareVisState, Translate(""));
            if (l_blnBarcodeValidation == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_12.InitCustomDialog("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");
              customDialog_12.SetCustomDialogProperty( "textBlock7.Text", l_strCarrierLabelName );
              customDialog_12.SetCustomDialogProperty( "textBlock3.Text", l_strSite1 );
              customDialog_12.SetCustomDialogProperty( "textBlock4.Text", l_strSite2 );
              customDialog_12.SetCustomDialogProperty( "textBlock5.Text", l_strSite3 );
              customDialog_12.SetCustomDialogProperty( "textBlock6.Text", l_strSite4 );
              customDialog_12.SetCustomDialogProperty( "textBlock8.Text", l_strSite5 );
              customDialog_12.SetCustomDialogProperty( "textBox1.IsVisible", l_blnEnable1 );
              customDialog_12.SetCustomDialogProperty( "textBox1.Text", l_strBarcode1 );
              customDialog_12.SetCustomDialogProperty( "textBox2.IsVisible", l_blnEnable2 );
              customDialog_12.SetCustomDialogProperty( "textBox2.Text", l_strBarcode2 );
              customDialog_12.SetCustomDialogProperty( "textBox3.IsVisible", l_blnEnable3 );
              customDialog_12.SetCustomDialogProperty( "textBox3.Text", l_strBarcode3 );
              customDialog_12.SetCustomDialogProperty( "textBox4.IsVisible", l_blnEnable4 );
              customDialog_12.SetCustomDialogProperty( "textBox4.Text", l_strBarcode4 );
              customDialog_12.SetCustomDialogProperty( "textBox5.IsVisible", l_blnEnable5 );
              customDialog_12.SetCustomDialogProperty( "textBox5.Text", l_strBarcode5 );
              customDialog_12.SetCustomDialogProperty( "textBlock10.Text", l_strTracksDescription );
              customDialog_12.ShowCustomDialog();
              l_intDialogReturn = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
              l_strBarcode1 = customDialog_12.GetCustomDialogProperty( "textBox1.Text" );
              l_strBarcode2 = customDialog_12.GetCustomDialogProperty( "textBox2.Text" );
              l_strBarcode3 = customDialog_12.GetCustomDialogProperty( "textBox3.Text" );
              l_strBarcode4 = customDialog_12.GetCustomDialogProperty( "textBox4.Text" );
              l_strBarcode5 = customDialog_12.GetCustomDialogProperty( "textBox5.Text" );
            }
            else
            {
              customDialog_13.InitCustomDialog("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");
              customDialog_13.SetCustomDialogProperty( "textBlock7.Text", l_strCarrierLabelName );
              customDialog_13.SetCustomDialogProperty( "textBlock3.Text", l_strSite1 );
              customDialog_13.SetCustomDialogProperty( "textBlock4.Text", l_strSite2 );
              customDialog_13.SetCustomDialogProperty( "textBlock5.Text", l_strSite3 );
              customDialog_13.SetCustomDialogProperty( "textBlock6.Text", l_strSite4 );
              customDialog_13.SetCustomDialogProperty( "textBlock8.Text", l_strSite5 );
              customDialog_13.SetCustomDialogProperty( "textBox1.IsVisible", l_blnEnable1 );
              customDialog_13.SetCustomDialogProperty( "textBox1.Text", l_strBarcode1 );
              customDialog_13.SetCustomDialogProperty( "textBox2.IsVisible", l_blnEnable2 );
              customDialog_13.SetCustomDialogProperty( "textBox2.Text", l_strBarcode2 );
              customDialog_13.SetCustomDialogProperty( "textBox3.IsVisible", l_blnEnable3 );
              customDialog_13.SetCustomDialogProperty( "textBox3.Text", l_strBarcode3 );
              customDialog_13.SetCustomDialogProperty( "textBox4.IsVisible", l_blnEnable4 );
              customDialog_13.SetCustomDialogProperty( "textBox4.Text", l_strBarcode4 );
              customDialog_13.SetCustomDialogProperty( "textBox5.IsVisible", l_blnEnable5 );
              customDialog_13.SetCustomDialogProperty( "textBox5.Text", l_strBarcode5 );
              customDialog_13.SetCustomDialogProperty( "textBlock10.Text", l_strTracksDescription );
              customDialog_13.ShowCustomDialog();
              l_intDialogReturn = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
              l_strBarcode1 = customDialog_13.GetCustomDialogProperty( "textBox1.Text" );
              l_strBarcode2 = customDialog_13.GetCustomDialogProperty( "textBox2.Text" );
              l_strBarcode3 = customDialog_13.GetCustomDialogProperty( "textBox3.Text" );
              l_strBarcode4 = customDialog_13.GetCustomDialogProperty( "textBox4.Text" );
              l_strBarcode5 = customDialog_13.GetCustomDialogProperty( "textBox5.Text" );
            }
            if (l_blnEnable1 == ASWGLOBAL::BOOL::TRUE)
            {
              l_strLabID=l_arrLabwareToLoad.GetAt(1-1);
              l_blnNull = HSLExtensions::Core::IsEmptyString(l_strBarcode1);
              if (l_blnNull == ASWGLOBAL::BOOL::TRUE)
              {
                l_strBarcode1 = Translate("NO BARCODE");
              }
              STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode1);
              l_arrLabware.AddAsLast(l_strLabID);
              l_arrLabwareVisState.AddAsLast(1);
              l_arrBarcodesScanned.AddAsLast(l_strBarcode1);
            }
            if (l_blnEnable2 == ASWGLOBAL::BOOL::TRUE)
            {
              l_strLabID=l_arrLabwareToLoad.GetAt(2-1);
              l_blnNull = HSLExtensions::Core::IsEmptyString(l_strBarcode2);
              if (l_blnNull == ASWGLOBAL::BOOL::TRUE)
              {
                l_strBarcode2 = Translate("NO BARCODE");
              }
              STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode2);
              l_arrLabware.AddAsLast(l_strLabID);
              l_arrLabwareVisState.AddAsLast(1);
              l_arrBarcodesScanned.AddAsLast(l_strBarcode2);
            }
            if (l_blnEnable3 == ASWGLOBAL::BOOL::TRUE)
            {
              l_strLabID=l_arrLabwareToLoad.GetAt(3-1);
              l_blnNull = HSLExtensions::Core::IsEmptyString(l_strBarcode3);
              if (l_blnNull == ASWGLOBAL::BOOL::TRUE)
              {
                l_strBarcode3 = Translate("NO BARCODE");
              }
              STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode3);
              l_arrLabware.AddAsLast(l_strLabID);
              l_arrLabwareVisState.AddAsLast(1);
              l_arrBarcodesScanned.AddAsLast(l_strBarcode3);
            }
            if (l_blnEnable4 == ASWGLOBAL::BOOL::TRUE)
            {
              l_strLabID=l_arrLabwareToLoad.GetAt(4-1);
              l_blnNull = HSLExtensions::Core::IsEmptyString(l_strBarcode4);
              if (l_blnNull == ASWGLOBAL::BOOL::TRUE)
              {
                l_strBarcode4 = Translate("NO BARCODE");
              }
              STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode4);
              l_arrLabware.AddAsLast(l_strLabID);
              l_arrLabwareVisState.AddAsLast(1);
              l_arrBarcodesScanned.AddAsLast(l_strBarcode4);
            }
            if (l_blnEnable5 == ASWGLOBAL::BOOL::TRUE)
            {
              l_strLabID=l_arrLabwareToLoad.GetAt(5-1);
              l_blnNull = HSLExtensions::Core::IsEmptyString(l_strBarcode5);
              if (l_blnNull == ASWGLOBAL::BOOL::TRUE)
              {
                l_strBarcode5 = Translate("NO BARCODE");
              }
              STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode5);
              l_arrLabware.AddAsLast(l_strLabID);
              l_arrLabwareVisState.AddAsLast(1);
              l_arrBarcodesScanned.AddAsLast(l_strBarcode5);
            }
            DeckVisualize::UpdateLoadedLabware(ML_STAR, l_arrLabware, l_arrLabwareVisState, Translate(""));
          }
        }
      }
    }
    l_blnFileExists = HSLExtensions::File::Exists(DATA_CONTROLLER::STR::FILE::REPORT_FILE_TEMPLATE);
    if (l_blnFileExists == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
    l_intPlatesScanned=l_arrBarcodesScanned.GetSize();
    ExcelEdit::OpenFile(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate("CoverSheet"));
    l_intLineIndex = 20;
    {
      for(l_intPlateIndex = 0; l_intPlateIndex < l_intPlatesScanned;)
      {
        l_intPlateIndex = l_intPlateIndex + 1;
        ExcelEdit::UpdateCell(8, l_intLineIndex, l_arrBarcodesScanned.ElementAt( l_intPlateIndex -1), ExcelEdit::CELL_TYPE::STRING);
        l_intLineIndex = l_intLineIndex + 1;
      }
    }
    DATA_CONTROLLER::INT::TIP_FILE_LINE = l_intLineIndex;
    ExcelEdit::CloseFile();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  private function _GetCarrierAndSiteID( device & Instrument, variable i_strLabwareID, variable & o_str_TemplateID, variable & o_str_TemplateSiteID ) void {
    private variable str_LabID;
    o_str_TemplateID = 0;
    o_str_TemplateSiteID = 0;
    str_LabID = i_strLabwareID;
    o_str_TemplateID = Translate("");
    o_str_TemplateSiteID = Translate("");
    {
        object obj_Decklayout;
        obj_Decklayout = Instrument.GetDeckLayoutObject();
        if (!obj_Decklayout.IsNull())
            {
                  object EditDecklayout5;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  variable Array_Keys[];
                  variable intCounter;
                  obj_Decklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  obj_Decklayout.TemplateLabwareNames(LabwareObjects);
                  Array_Keys = LabwareObjects.GetKeys();
                  for(intCounter=1; intCounter<=Array_Keys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      if(LabwareNames.Item1("Labwr_Id") == str_LabID)
                      {
                          o_str_TemplateSiteID = LabwareNames.Item1("Labwr_DkSiteId");
                          o_str_TemplateID = LabwareNames.Item1("Labwr_TemplateId");
                      }
                  }
                  obj_Decklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  Parameter.ReleaseObject();
                  LabwareObjects.ReleaseObject();
                  LabwareNames.ReleaseObject();
           }
    }
  }

  private function _GetFirstPosition( device & Instrument, variable i_str_LabID, variable & o_str_PosID ) void {
    private variable int_Increment;
    private variable str_ErrorDescription;
    private variable strFunctionName;
    private variable bool_LabwareNotValid;
    private variable int_TotalColumns;
    private variable int_Index;
    private variable int_TotalRows;
    o_str_PosID = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_TotalRows = 0;
    int_TotalColumns = 0;
    int_Index = 0;
    int_Increment = 0;
    bool_LabwareNotValid = DevIsValidLabwareForCurrentDeckLayout(Instrument, i_str_LabID);
    if (bool_LabwareNotValid == 0)
    {
      str_ErrorDescription = StrConcat8(Translate(""), Translate(""), Translate("Labware ID: '"), i_str_LabID, Translate("' is not known on the deck layout"), Translate(""), Translate(""), Translate(""));
    }
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      int_TotalRows = objRack4.Rows();
      int_TotalColumns = objRack4.Columns();
      int_Index = objRack4.Index();
      int_Increment = objRack4.Increment();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    if (int_Index == 1)
    {
      ANC::Convert_Numbers_to_Alpha_Numeric(int_Increment, 1, int_TotalRows, int_TotalColumns, o_str_PosID);
    }
    else
    {
      o_str_PosID = StrConcat2(1, Translate(""));
    }
  }

  private function _Lookup( variable & array[], variable item ) variable {
    private variable index;
    private variable lookupreturn;
    lookupreturn = Util::Lookup(array, item, index);
    if (lookupreturn > 0)
    {
      index = index + 1;
      return (index);
    }
    else
    {
      return (0);
    }
  }

  private function _GetCarrierTracks( device & Instrument, variable i_strLabwareID, variable & o_int_TotalTracks, variable & o_int_LeftMostTrack, variable & o_int_RightMostTrack ) void {
    private variable flt_X_Coord;
    private variable flt_Z_Coord;
    private variable flt_Y_Coord;
    private variable int_NumberOfTracks;
    o_int_TotalTracks = 0;
    o_int_LeftMostTrack = 0;
    o_int_RightMostTrack = 0;
    o_int_LeftMostTrack = 0;
    o_int_RightMostTrack = 0;
    o_int_TotalTracks = 0;
    int_NumberOfTracks = DevGetLabwareData(Instrument, i_strLabwareID, Translate("MlStarCarWidthAsT"));
    if (int_NumberOfTracks != "")
    {
      _ConvertToInteger(int_NumberOfTracks, o_int_TotalTracks);
      _GetTemplateOrigin2(Instrument, i_strLabwareID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord);
      flt_X_Coord = flt_X_Coord - 77.5;
      o_int_LeftMostTrack = flt_X_Coord / (22.5 * 1.0);
      _ConvertToInteger(o_int_LeftMostTrack, o_int_LeftMostTrack);
      o_int_RightMostTrack = o_int_LeftMostTrack + o_int_TotalTracks;
      _ConvertToInteger(o_int_RightMostTrack, o_int_RightMostTrack);
      o_int_RightMostTrack = o_int_RightMostTrack - 1;
      if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_13 == ASWGLOBAL::BOOL::TRUE)
      {
        o_int_LeftMostTrack = o_int_LeftMostTrack + 3;
        o_int_RightMostTrack = o_int_RightMostTrack + 3;
      }
      if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_20 == ASWGLOBAL::BOOL::TRUE)
      {
        o_int_LeftMostTrack = o_int_LeftMostTrack + 3;
        o_int_RightMostTrack = o_int_RightMostTrack + 3;
      }
    }
  }

  private function _GetConfigFile( device & Instrument, variable i_strLabware, variable & o_str_ConfigFilePath ) void {
    private variable str_LabID;
    o_str_ConfigFilePath = 0;
    str_LabID = i_strLabware;
    o_str_ConfigFilePath = Translate("");
    //Get Config File
    {
         object objDeckLayout;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              object objLabware;
              onerror goto HandleLabwareError;
              objLabware = objDeckLayout.Labware(str_LabID);
              onerror goto 0;
              err.Clear();
              if(!objLabware.IsNull())
              {
                   object objEditLabware5;
                   objLabware.GetObject("IEditLabware5", objEditLabware5);
                  o_str_ConfigFilePath = objEditLabware5.Filename;
                   objEditLabware5.ReleaseObject();
                   objDeckLayout.ReleaseObject();
                   objLabware.ReleaseObject();
              }
         }
               // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
                 if(errorID != 0)
                 {
                      if (errorID==-1574764487)
                      {
                            Trace("LabwareID is  unknown.");
                      }
                      else
                      {
                            Trace("Unknown error occured.");
                      }
                 }
            }
    }
  }

  private function _ConvertToInteger( variable iVariable, variable & oVariable ) void {
    private variable str_Variable;
    oVariable = 0;
    str_Variable = StrConcat2(iVariable, Translate(""));
    oVariable = StrIVal(str_Variable);
  }

  private function _GetTemplateOrigin2( device & Instrument, variable i_str_TemplateLabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void {
    private variable flt_NotUsed;
    o_flt_X_Coord = 0;
    o_flt_Y_Coord = 0;
    o_flt_Z_Coord = 0;
    o_flt_X_Coord = 0.0;
    o_flt_Y_Coord = 0.0;
    o_flt_Z_Coord = 0.0;
    DevGetLabwarePosition(Instrument, i_str_TemplateLabID, o_flt_X_Coord, o_flt_Y_Coord, o_flt_Z_Coord, flt_NotUsed);
  }

  private function _GetTipDescription( variable i_intTipType, variable & o_strTipName ) void {
    private variable l_strTipType;
    o_strTipName = 0;
    l_strTipType = StrConcat2(i_intTipType, Translate(""));
    o_strTipName = Translate("Empty");
    if (l_strTipType == "0")
    {
      o_strTipName = Translate("300 µL Tips");
    }
    if (l_strTipType == "1")
    {
      o_strTipName = Translate("300 µLTips");
    }
    if (l_strTipType == "22")
    {
      o_strTipName = Translate("50 µL Tips");
    }
    if (l_strTipType == "23")
    {
      o_strTipName = Translate("50 µL Tips");
    }
    if (l_strTipType == "4")
    {
      o_strTipName = Translate("1000 µL Tips");
    }
    if (l_strTipType == "5")
    {
      o_strTipName = Translate("1000 µL Tips");
    }
  }

  function LOAD_ChannelReagents( device & ML_STAR ) void {
    private sequence l_seqPositionsToLoad;
    private variable l_intTotalLabware;
    private variable l_arrCarriers[];
    private variable l_arrLabwareIDs[];
    private variable l_intCarrierCheck;
    private variable l_intTotalCarriers;
    private variable l_intIndex;
    private variable l_strCarrier;
    private variable l_strLabID;
    private variable l_strCarrierSite;
    private variable l_intCarrierIndex;
    private variable l_strTracksDescription;
    private variable l_strSite2;
    private variable l_strSite3;
    private variable l_intLeftTrack;
    private variable l_strCarrierMask;
    private variable l_strSite4;
    private variable l_strSite5;
    private variable l_strCarrierLabelName;
    private variable l_intRightTrack;
    private variable l_intTotalTracks;
    private variable l_blnEnable1;
    private variable l_blnEnable2;
    private variable l_strBarcode1;
    private variable l_blnEnable3;
    private variable l_strSitesToScan;
    private variable l_strBarcode2;
    private variable l_blnEnable4;
    private variable l_blnEnable5;
    private variable l_strBarcode3;
    private variable l_strBarcode4;
    private variable l_strBarcodeMask;
    private variable l_strBarcode5;
    private variable l_strCarrierToLoad;
    private variable l_strSite1;
    private variable l_arrBarcodeMasks[];
    private variable l_arrLabwareToLoad[];
    private variable l_intDeckID;
    private variable l_intElementID;
    private variable l_intDialogReturn;
    private dialog customDialog_14;
    private dialog customDialog_15;
    private variable l_strFunctionName;
    private variable l_strCarrierInfo;
    private variable l_arrVisLabware[];
    private variable l_arrVisState[];
    private variable l_strVolumeNeeded[];
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    l_intDeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
    SeqRemoveAll(l_seqPositionsToLoad);
    if (DATA_CONTROLLER::PROCESS::PREPARE_VERIFICATION_PLATE == ASWGLOBAL::BOOL::TRUE)
    {
      l_seqPositionsToLoad = HSLExtensions::Sequence::Concat(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::REAGENT_BASELINE, ASWGLOBAL::BOOL::FALSE);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_DILUENT == ASWGLOBAL::BOOL::TRUE)
    {
      l_seqPositionsToLoad = HSLExtensions::Sequence::Concat(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::REAGENT_DILUENT, ASWGLOBAL::BOOL::FALSE);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_RANGE == ASWGLOBAL::BOOL::TRUE)
    {
      l_seqPositionsToLoad = HSLExtensions::Sequence::Concat(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION1, ASWGLOBAL::BOOL::FALSE);
      l_seqPositionsToLoad = HSLExtensions::Sequence::Concat(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION2, ASWGLOBAL::BOOL::FALSE);
      l_seqPositionsToLoad = HSLExtensions::Sequence::Concat(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION3, ASWGLOBAL::BOOL::FALSE);
    }
    SeqGetLabwareIds(l_seqPositionsToLoad, l_arrLabwareIDs);
    l_intTotalLabware=l_arrLabwareIDs.GetSize();
    l_arrCarriers.SetSize(0);
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
      {
        l_intIndex = l_intIndex + 1;
        l_strLabID=l_arrLabwareIDs.GetAt(l_intIndex-1);
        _GetCarrierAndSiteID(ML_STAR, l_strLabID, l_strCarrier, l_strCarrierSite);
        l_intCarrierCheck = _Lookup(l_arrCarriers, l_strCarrier);
        if (l_intCarrierCheck == 0)
        {
          l_arrCarriers.AddAsLast(l_strCarrier);
        }
      }
    }
    Util2::Debug::TraceArray(Translate("Unique Carriers"), l_arrCarriers);
    l_intTotalCarriers=l_arrCarriers.GetSize();
    _UpdateStatus(Translate("Load reagents..."), ASWGLOBAL::BOOL::FALSE);
    {
      for(l_intCarrierIndex = 0; l_intCarrierIndex < l_intTotalCarriers;)
      {
        l_intCarrierIndex = l_intCarrierIndex + 1;
        l_arrBarcodeMasks.SetSize(0);
        l_strCarrierToLoad=l_arrCarriers.GetAt(l_intCarrierIndex-1);
        _GetCarrierTracks(ML_STAR, l_strCarrierToLoad, l_intTotalTracks, l_intLeftTrack, l_intRightTrack);
        if (l_intLeftTrack == l_intRightTrack)
        {
          l_strTracksDescription = StrConcat4(l_intLeftTrack, Translate(""), Translate(""), Translate(""));
        }
        else
        {
          l_strTracksDescription = StrConcat4(Translate(""), l_intLeftTrack, Translate(" - "), l_intRightTrack);
        }
        l_strCarrierLabelName = DevGetLabwareData(ML_STAR, l_strCarrierToLoad, Translate("MlStarCarLabelName"));
        DevGetBarcodeData(ML_STAR, l_strCarrierToLoad, Translate(""), l_strCarrierMask);
        l_strSitesToScan = Translate("");
        l_strSite1 = Translate("Empty");
        l_strSite2 = Translate("Empty");
        l_strSite3 = Translate("Empty");
        l_strSite4 = Translate("Empty");
        l_strSite5 = Translate("Empty");
        l_strBarcode1 = Translate("");
        l_strBarcode2 = Translate("");
        l_strBarcode3 = Translate("");
        l_strBarcode4 = Translate("");
        l_strBarcode5 = Translate("");
        l_arrLabwareToLoad.SetSize(5);
        l_arrLabwareToLoad.SetAt(1-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(2-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(3-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(4-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(5-1, Translate("EMPTY"));
        l_strBarcode1 = Translate("111111111111111111");
        l_strBarcode2 = Translate("111111111111111111");
        l_strBarcode3 = Translate("111111111111111111");
        l_strBarcode4 = Translate("111111111111111111");
        l_strBarcode5 = Translate("111111111111111111");
        l_blnEnable1 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable2 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable3 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable4 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable5 = ASWGLOBAL::BOOL::FALSE;
        l_arrVisLabware.SetSize(0);
        l_arrVisState.SetSize(0);
        _GetVolumesPerLabID_Channels(ML_STAR, l_arrLabwareIDs, l_strVolumeNeeded);
        {
          for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
          {
            l_intIndex = l_intIndex + 1;
            l_strLabID=l_arrLabwareIDs.GetAt(l_intIndex-1);
            _GetCarrierAndSiteID(ML_STAR, l_strLabID, l_strCarrier, l_strCarrierSite);
            if (l_strCarrier == l_strCarrierToLoad)
            {
              TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Labware:  "), l_strLabID, Translate(""));
              l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, l_strLabID);
              l_strBarcodeMask = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
              l_arrBarcodeMasks.AddAsLast(l_strBarcodeMask);
              l_strBarcodeMask = StrConcat4(l_strBarcodeMask, Translate(" - "), l_strVolumeNeeded.ElementAt( l_intIndex -1), Translate(""));
              l_strSitesToScan = StrConcat4(l_strSitesToScan, l_strCarrierSite, Translate(""), Translate(""));
              if (l_intIndex < l_intTotalLabware)
              {
                l_strSitesToScan = StrConcat4(l_strSitesToScan, Translate(","), Translate(""), Translate(""));
              }
              if (l_strCarrierSite == "1")
              {
                l_strSite1 = l_strBarcodeMask;
                l_arrLabwareToLoad.SetAt(1-1, l_strLabID);
                l_arrVisLabware.AddAsLast(l_strLabID);
                l_arrVisState.AddAsLast(1);
                l_blnEnable1 = ASWGLOBAL::BOOL::TRUE;
              }
              if (l_strCarrierSite == "2")
              {
                l_strSite2 = l_strBarcodeMask;
                l_arrLabwareToLoad.SetAt(2-1, l_strLabID);
                l_arrVisLabware.AddAsLast(l_strLabID);
                l_arrVisState.AddAsLast(1);
                l_blnEnable2 = ASWGLOBAL::BOOL::TRUE;
              }
              if (l_strCarrierSite == "3")
              {
                l_strSite3 = l_strBarcodeMask;
                l_arrLabwareToLoad.SetAt(3-1, l_strLabID);
                l_arrVisLabware.AddAsLast(l_strLabID);
                l_arrVisState.AddAsLast(1);
                l_blnEnable3 = ASWGLOBAL::BOOL::TRUE;
              }
              if (l_strCarrierSite == "4")
              {
                l_strSite4 = l_strBarcodeMask;
                l_arrLabwareToLoad.SetAt(4-1, l_strLabID);
                l_arrVisLabware.AddAsLast(l_strLabID);
                l_arrVisState.AddAsLast(1);
                l_blnEnable4 = ASWGLOBAL::BOOL::TRUE;
              }
              if (l_strCarrierSite == "5")
              {
                l_strSite5 = l_strBarcodeMask;
                l_arrLabwareToLoad.SetAt(5-1, l_strLabID);
                l_arrVisLabware.AddAsLast(l_strLabID);
                l_arrVisState.AddAsLast(1);
                l_blnEnable5 = ASWGLOBAL::BOOL::TRUE;
              }
            }
          }
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier to Load:  "), l_strCarrierToLoad, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Sites to Load:  "), l_strSitesToScan, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier Label Name:  "), l_strCarrierLabelName, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier Mask:  "), l_strCarrierMask, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Tracks to load:  "), l_strTracksDescription, Translate(""));
        DeckVisualize::UpdateLoadedLabware(ML_STAR, l_arrVisLabware, l_arrVisState, Translate(""));
        l_strCarrierInfo = StrConcat4(l_strCarrierLabelName, Translate(" :: Track "), l_strTracksDescription, Translate(""));
        _UpdateStatus(l_strCarrierInfo, ASWGLOBAL::BOOL::TRUE);
        if (DATA_CONTROLLER::SYSTEM::AUTOLOAD == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
          customDialog_14.InitCustomDialog("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");
          customDialog_14.SetCustomDialogProperty( "textBlock7.Text", l_strCarrierLabelName );
          customDialog_14.SetCustomDialogProperty( "textBlock3.Text", l_strSite1 );
          customDialog_14.SetCustomDialogProperty( "textBlock4.Text", l_strSite2 );
          customDialog_14.SetCustomDialogProperty( "textBlock5.Text", l_strSite3 );
          customDialog_14.SetCustomDialogProperty( "textBlock6.Text", l_strSite4 );
          customDialog_14.SetCustomDialogProperty( "textBlock8.Text", l_strSite5 );
          customDialog_14.SetCustomDialogProperty( "textBlock9.Text", l_strTracksDescription );
          customDialog_14.ShowCustomDialog();
          l_intDialogReturn = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          Util2::Debug::TraceArray(Translate("Labware to Load"), l_arrLabwareToLoad);
          customDialog_15.InitCustomDialog("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");
          customDialog_15.SetCustomDialogProperty( "textBlock7.Text", l_strCarrierLabelName );
          customDialog_15.SetCustomDialogProperty( "textBlock3.Text", l_strSite1 );
          customDialog_15.SetCustomDialogProperty( "textBlock4.Text", l_strSite2 );
          customDialog_15.SetCustomDialogProperty( "textBlock5.Text", l_strSite3 );
          customDialog_15.SetCustomDialogProperty( "textBlock6.Text", l_strSite4 );
          customDialog_15.SetCustomDialogProperty( "textBlock8.Text", l_strSite5 );
          customDialog_15.SetCustomDialogProperty( "textBlock9.Text", l_strTracksDescription );
          customDialog_15.ShowCustomDialog();
          l_intDialogReturn = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
        }
        if (l_blnEnable1 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(1-1);
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strSite1);
        }
        if (l_blnEnable2 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(2-1);
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strSite2);
        }
        if (l_blnEnable3 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(3-1);
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strSite3);
        }
        if (l_blnEnable4 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(4-1);
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strSite4);
        }
        if (l_blnEnable5 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(5-1);
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strSite5);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function LOAD_MPHReagents( device & ML_STAR ) void {
    private variable l_strTracksDescription;
    private variable l_intCarrierCheck;
    private variable l_strSite2;
    private variable l_intLeftTrack;
    private variable l_strSite3;
    private variable l_strCarrierMask;
    private variable l_strSite4;
    private variable l_intTotalCarriers;
    private variable l_strSite5;
    private variable l_strCarrierLabelName;
    private variable l_intRightTrack;
    private variable l_intTotalTracks;
    private variable l_blnEnable1;
    private variable l_intIndex;
    private variable l_blnEnable2;
    private variable l_blnEnable3;
    private variable l_strBarcode1;
    private variable l_strSitesToScan;
    private variable l_blnEnable4;
    private variable l_strBarcode2;
    private variable l_strCarrier;
    private variable l_intCarrierIndex;
    private variable l_strBarcode3;
    private variable l_blnEnable5;
    private variable l_strBarcode4;
    private variable l_intDeckID;
    private variable l_strBarcodeMask;
    private variable l_strBarcode5;
    private variable l_strLabID;
    private variable l_intTotalLabware;
    private variable l_strCarrierSite;
    private variable l_strCarrierToLoad;
    private variable l_intElementID;
    private variable l_strSite1;
    private sequence l_seqPositionsToLoad;
    private variable l_arrBarcodeMasks[];
    private variable l_arrLabwareToLoad[];
    private variable l_arrCarriers[];
    private variable l_arrLabwareIDs[];
    private dialog customDialog_16;
    private variable l_intDialogReturn;
    private variable l_arrVisLabware[];
    private variable l_arrVisState[];
    private variable l_strFunctionName;
    private variable l_strCarrierInfo;
    private variable l_strVolumeNeeded[];
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    l_intDeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
    SeqRemoveAll(l_seqPositionsToLoad);
    if (DATA_CONTROLLER::PROCESS::PREPARE_VERIFICATION_PLATE == ASWGLOBAL::BOOL::TRUE)
    {
      l_seqPositionsToLoad = HSLExtensions::Sequence::Concat(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::REAGENT_BASELINE, ASWGLOBAL::BOOL::FALSE);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_DILUENT == ASWGLOBAL::BOOL::TRUE)
    {
      l_seqPositionsToLoad = HSLExtensions::Sequence::Concat(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::REAGENT_DILUENT, ASWGLOBAL::BOOL::FALSE);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_RANGE == ASWGLOBAL::BOOL::TRUE)
    {
      l_seqPositionsToLoad = HSLExtensions::Sequence::Concat(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION1, ASWGLOBAL::BOOL::FALSE);
    }
    SeqGetLabwareIds(l_seqPositionsToLoad, l_arrLabwareIDs);
    l_intTotalLabware=l_arrLabwareIDs.GetSize();
    l_arrCarriers.SetSize(0);
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
      {
        l_intIndex = l_intIndex + 1;
        l_strLabID=l_arrLabwareIDs.GetAt(l_intIndex-1);
        _GetCarrierAndSiteID(ML_STAR, l_strLabID, l_strCarrier, l_strCarrierSite);
        l_intCarrierCheck = _Lookup(l_arrCarriers, l_strCarrier);
        if (l_intCarrierCheck == 0)
        {
          l_arrCarriers.AddAsLast(l_strCarrier);
        }
      }
    }
    Util2::Debug::TraceArray(Translate("Unique Carriers"), l_arrCarriers);
    l_intTotalCarriers=l_arrCarriers.GetSize();
    _UpdateStatus(Translate("Load reagents..."), ASWGLOBAL::BOOL::FALSE);
    {
      for(l_intCarrierIndex = 0; l_intCarrierIndex < l_intTotalCarriers;)
      {
        l_intCarrierIndex = l_intCarrierIndex + 1;
        l_arrBarcodeMasks.SetSize(0);
        l_strCarrierToLoad=l_arrCarriers.GetAt(l_intCarrierIndex-1);
        _GetCarrierTracks(ML_STAR, l_strCarrierToLoad, l_intTotalTracks, l_intLeftTrack, l_intRightTrack);
        l_strTracksDescription = StrConcat4(Translate(""), l_intLeftTrack, Translate(" - "), l_intRightTrack);
        l_strCarrierLabelName = DevGetLabwareData(ML_STAR, l_strCarrierToLoad, Translate("MlStarCarLabelName"));
        DevGetBarcodeData(ML_STAR, l_strCarrierToLoad, Translate(""), l_strCarrierMask);
        l_strSitesToScan = Translate("");
        l_strSite1 = Translate("No Reagents");
        l_strSite2 = Translate("No Reagents");
        l_strSite3 = Translate("No Reagents");
        l_strSite4 = Translate("No Reagents");
        l_strSite5 = Translate("No Reagents");
        l_strBarcode1 = Translate("");
        l_strBarcode2 = Translate("");
        l_strBarcode3 = Translate("");
        l_strBarcode4 = Translate("");
        l_strBarcode5 = Translate("");
        l_arrLabwareToLoad.SetSize(5);
        l_arrLabwareToLoad.SetAt(1-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(2-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(3-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(4-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(5-1, Translate("EMPTY"));
        l_strBarcode1 = Translate("111111111111111111");
        l_strBarcode2 = Translate("111111111111111111");
        l_strBarcode3 = Translate("111111111111111111");
        l_strBarcode4 = Translate("111111111111111111");
        l_strBarcode5 = Translate("111111111111111111");
        l_blnEnable1 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable2 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable3 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable4 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable5 = ASWGLOBAL::BOOL::FALSE;
        l_arrVisLabware.SetSize(0);
        l_arrVisState.SetSize(0);
        _GetVolumesPerLabID_MPH(ML_STAR, l_arrLabwareIDs, l_strVolumeNeeded);
        {
          for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
          {
            l_intIndex = l_intIndex + 1;
            l_strLabID=l_arrLabwareIDs.GetAt(l_intIndex-1);
            _GetCarrierAndSiteID(ML_STAR, l_strLabID, l_strCarrier, l_strCarrierSite);
            if (l_strCarrier == l_strCarrierToLoad)
            {
              TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Labware:  "), l_strLabID, Translate(""));
              l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, l_strLabID);
              l_strBarcodeMask = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
              l_arrBarcodeMasks.AddAsLast(l_strBarcodeMask);
              l_strBarcodeMask = StrConcat4(l_strBarcodeMask, Translate(" - "), l_strVolumeNeeded.ElementAt( l_intIndex -1), Translate(""));
              l_strSitesToScan = StrConcat4(l_strSitesToScan, l_strCarrierSite, Translate(""), Translate(""));
              if (l_intIndex < l_intTotalLabware)
              {
                l_strSitesToScan = StrConcat4(l_strSitesToScan, Translate(","), Translate(""), Translate(""));
              }
              if (l_strCarrierSite == "1")
              {
                l_strSite1 = l_strBarcodeMask;
                l_arrLabwareToLoad.SetAt(1-1, l_strLabID);
                l_arrVisLabware.AddAsLast(l_strLabID);
                l_arrVisState.AddAsLast(5);
                l_blnEnable1 = ASWGLOBAL::BOOL::TRUE;
              }
              if (l_strCarrierSite == "2")
              {
                l_strSite2 = l_strBarcodeMask;
                l_arrLabwareToLoad.SetAt(2-1, l_strLabID);
                l_arrVisLabware.AddAsLast(l_strLabID);
                l_arrVisState.AddAsLast(5);
                l_blnEnable2 = ASWGLOBAL::BOOL::TRUE;
              }
              if (l_strCarrierSite == "3")
              {
                l_strSite3 = l_strBarcodeMask;
                l_arrLabwareToLoad.SetAt(3-1, l_strLabID);
                l_arrVisLabware.AddAsLast(l_strLabID);
                l_arrVisState.AddAsLast(5);
                l_blnEnable3 = ASWGLOBAL::BOOL::TRUE;
              }
              if (l_strCarrierSite == "4")
              {
                l_strSite4 = l_strBarcodeMask;
                l_arrLabwareToLoad.SetAt(4-1, l_strLabID);
                l_arrVisLabware.AddAsLast(l_strLabID);
                l_arrVisState.AddAsLast(5);
                l_blnEnable4 = ASWGLOBAL::BOOL::TRUE;
              }
              if (l_strCarrierSite == "5")
              {
                l_strSite5 = l_strBarcodeMask;
                l_arrLabwareToLoad.SetAt(5-1, l_strLabID);
                l_arrVisLabware.AddAsLast(l_strLabID);
                l_arrVisState.AddAsLast(5);
                l_blnEnable5 = ASWGLOBAL::BOOL::TRUE;
              }
            }
          }
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier to Load:  "), l_strCarrierToLoad, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Sites to Load:  "), l_strSitesToScan, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier Label Name:  "), l_strCarrierLabelName, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier Mask:  "), l_strCarrierMask, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Tracks to load:  "), l_strTracksDescription, Translate(""));
        Util2::Debug::TraceArray(Translate("Labware to Load"), l_arrLabwareToLoad);
        DeckVisualize::UpdateLoadedLabware(ML_STAR, l_arrVisLabware, l_arrVisState, Translate(""));
        l_strCarrierInfo = StrConcat4(l_strCarrierLabelName, Translate(" :: Track "), l_strTracksDescription, Translate(""));
        _UpdateStatus(l_strCarrierInfo, ASWGLOBAL::BOOL::TRUE);
        if (DATA_CONTROLLER::SYSTEM::AUTOLOAD == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        }
        customDialog_16.InitCustomDialog("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");
        customDialog_16.SetCustomDialogProperty( "textBlock7.Text", l_strCarrierLabelName );
        customDialog_16.SetCustomDialogProperty( "textBlock3.Text", l_strSite1 );
        customDialog_16.SetCustomDialogProperty( "textBlock4.Text", l_strSite2 );
        customDialog_16.SetCustomDialogProperty( "textBlock5.Text", l_strSite3 );
        customDialog_16.SetCustomDialogProperty( "textBlock6.Text", l_strSite4 );
        customDialog_16.SetCustomDialogProperty( "textBlock8.Text", l_strSite5 );
        customDialog_16.SetCustomDialogProperty( "textBlock9.Text", l_strTracksDescription );
        customDialog_16.ShowCustomDialog();
        l_intDialogReturn = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
        l_arrVisLabware.SetSize(0);
        l_arrVisState.SetSize(0);
        if (l_blnEnable1 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(1-1);
          l_arrVisLabware.AddAsLast(l_strLabID);
          l_arrVisState.AddAsLast(1);
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strSite1);
        }
        if (l_blnEnable2 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(2-1);
          l_arrVisLabware.AddAsLast(l_strLabID);
          l_arrVisState.AddAsLast(1);
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strSite2);
        }
        if (l_blnEnable3 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(3-1);
          l_arrVisLabware.AddAsLast(l_strLabID);
          l_arrVisState.AddAsLast(1);
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strSite3);
        }
        if (l_blnEnable4 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(4-1);
          l_arrVisLabware.AddAsLast(l_strLabID);
          l_arrVisState.AddAsLast(1);
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strSite4);
        }
        if (l_blnEnable5 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(5-1);
          l_arrVisLabware.AddAsLast(l_strLabID);
          l_arrVisState.AddAsLast(1);
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strSite5);
        }
        DeckVisualize::UpdateLoadedLabware(ML_STAR, l_arrVisLabware, l_arrVisState, Translate(""));
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function LOAD_Plates( device & ML_STAR ) void {
    private variable l_intTotalChannels;
    private variable l_intWellsPerRange;
    private variable l_intReplicates;
    private variable l_intTotalLiquidClasses;
    private variable l_arrLiquidClasses[];
    private sequence l_seqPositionsToLoad;
    private variable l_strLabID;
    private variable l_intCarrierCheck;
    private variable l_strTracksDescription;
    private variable l_strSite2;
    private variable l_intLeftTrack;
    private variable l_strSite3;
    private variable l_strSite4;
    private variable l_strCarrierMask;
    private variable l_intTotalCarriers;
    private variable l_strSite5;
    private variable l_strCarrierLabelName;
    private variable l_intRightTrack;
    private variable l_intTotalTracks;
    private variable l_blnEnable1;
    private variable l_intIndex;
    private variable l_blnEnable2;
    private variable l_strBarcode1;
    private variable l_blnEnable3;
    private variable l_strSitesToScan;
    private variable l_strBarcode2;
    private variable l_strCarrier;
    private variable l_blnEnable4;
    private variable l_strBarcode3;
    private variable l_intCarrierIndex;
    private variable l_blnEnable5;
    private variable l_strBarcodeMask;
    private variable l_strBarcode4;
    private variable l_strBarcode5;
    private variable l_intTotalLabware;
    private variable l_strCarrierSite;
    private variable l_strCarrierToLoad;
    private variable l_intTipType;
    private variable l_strSite1;
    private variable l_arrBarcodeMasks[];
    private variable l_arrLabwareToLoad[];
    private variable l_arrCarriers[];
    private variable l_arrLabwareIDs[];
    private variable l_intDialogReturn;
    private variable l_strPlateDescription;
    private variable l_arrLabwareVisState[];
    private variable l_arrLabware[];
    private variable l_arrPlatesScanned[];
    private variable l_intPlatesScanned;
    private variable l_blnFileExists;
    private variable l_intPlateIndex;
    private variable l_intLineIndex;
    private variable l_strFunctionName;
    private variable l_strCarrierInfo;
    private variable l_blnBarcodeValidation;
    private dialog customDialog_17;
    private dialog customDialog_18;
    private variable l_blnNull;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    l_blnBarcodeValidation = ASWGLOBAL::BOOL::FALSE;
    l_strPlateDescription = Translate("Fresh Artel Plate");
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Replicates"), l_intReplicates);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("EnableBarcodeValdation"), l_blnBarcodeValidation);
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("LiquidClass"), Translate("s"), l_arrLiquidClasses, l_intTotalLiquidClasses);
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalChannels = 96;
      l_intTotalLiquidClasses = 1;
      if (DATA_CONTROLLER::BLN::OVERIDE_REPLICATES == ASWGLOBAL::BOOL::TRUE)
      {
        l_intReplicates = DATA_CONTROLLER::INT::REPLICATE_NUMBER;
      }
      if (DATA_CONTROLLER::PROCESS::SETUP_RANGE == ASWGLOBAL::BOOL::FALSE)
      {
        if (DATA_CONTROLLER::PROCESS::SETUP_DILUENT == ASWGLOBAL::BOOL::FALSE)
        {
          l_intTotalChannels = 0;
        }
      }
    }
    else
    {
      l_intTotalChannels = StrReplace(DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN, Translate("1"), Translate("1"));
    }
    l_intWellsPerRange = l_intTotalChannels * l_intReplicates;
    l_intWellsPerRange = l_intWellsPerRange * l_intTotalLiquidClasses;
    if (DATA_CONTROLLER::PROCESS::PREPARE_VERIFICATION_PLATE == ASWGLOBAL::BOOL::TRUE)
    {
      l_intWellsPerRange = l_intWellsPerRange + 96;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Total Channels:  "), l_intTotalChannels, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Total Replicates:  "), l_intReplicates, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Total Liquid Classes:  "), l_intTotalLiquidClasses, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Total wells needed:  "), l_intWellsPerRange, Translate(""));
    SeqCopySequence(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::PLATES);
    l_seqPositionsToLoad.SetCount(l_intWellsPerRange);
    SeqGetLabwareIds(l_seqPositionsToLoad, l_arrLabwareIDs);
    l_intTotalLabware=l_arrLabwareIDs.GetSize();
    l_arrCarriers.SetSize(0);
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
      {
        l_intIndex = l_intIndex + 1;
        l_strLabID=l_arrLabwareIDs.GetAt(l_intIndex-1);
        _GetCarrierAndSiteID(ML_STAR, l_strLabID, l_strCarrier, l_strCarrierSite);
        l_intCarrierCheck = _Lookup(l_arrCarriers, l_strCarrier);
        if (l_intCarrierCheck == 0)
        {
          l_arrCarriers.AddAsLast(l_strCarrier);
        }
      }
    }
    Util2::Debug::TraceArray(Translate("Unique Carriers"), l_arrCarriers);
    l_intTotalCarriers=l_arrCarriers.GetSize();
    l_arrPlatesScanned.SetSize(0);
    _UpdateStatus(Translate("Load plates..."), ASWGLOBAL::BOOL::FALSE);
    {
      for(l_intCarrierIndex = 0; l_intCarrierIndex < l_intTotalCarriers;)
      {
        l_intCarrierIndex = l_intCarrierIndex + 1;
        if (l_intCarrierIndex == 1)
        {
          if (l_blnMakeBaseline == 1)
          {
            l_strPlateDescription = Translate("Fresh Baseline Artel Plate");
          }
          if (l_blnAddRange == 1)
          {
            l_strPlateDescription = Translate("Fresh Range Artel Plate");
          }
        }
        else
        {
          if (l_blnMakeBaseline == 1)
          {
            l_strPlateDescription = Translate("Fresh Baseline Artel Plate");
          }
        }
        l_arrBarcodeMasks.SetSize(0);
        l_strCarrierToLoad=l_arrCarriers.GetAt(l_intCarrierIndex-1);
        _GetCarrierTracks(ML_STAR, l_strCarrierToLoad, l_intTotalTracks, l_intLeftTrack, l_intRightTrack);
        l_strTracksDescription = StrConcat4(Translate(""), l_intLeftTrack, Translate(" - "), l_intRightTrack);
        l_strCarrierLabelName = DevGetLabwareData(ML_STAR, l_strCarrierToLoad, Translate("MlStarCarLabelName"));
        DevGetBarcodeData(ML_STAR, l_strCarrierToLoad, Translate(""), l_strCarrierMask);
        l_strSitesToScan = Translate("");
        l_strSite1 = Translate("Empty");
        l_strSite2 = Translate("Empty");
        l_strSite3 = Translate("Empty");
        l_strSite4 = Translate("Empty");
        l_strSite5 = Translate("Empty");
        l_strBarcode1 = Translate("");
        l_strBarcode2 = Translate("");
        l_strBarcode3 = Translate("");
        l_strBarcode4 = Translate("");
        l_strBarcode5 = Translate("");
        l_arrLabwareToLoad.SetSize(5);
        l_arrLabwareToLoad.SetAt(1-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(2-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(3-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(4-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(5-1, Translate("EMPTY"));
        l_strBarcode1 = Translate("111111111111111111");
        l_strBarcode2 = Translate("111111111111111111");
        l_strBarcode3 = Translate("111111111111111111");
        l_strBarcode4 = Translate("111111111111111111");
        l_strBarcode5 = Translate("111111111111111111");
        l_blnEnable1 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable2 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable3 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable4 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable5 = ASWGLOBAL::BOOL::FALSE;
        l_arrLabware.SetSize(0);
        l_arrLabwareVisState.SetSize(0);
        {
          for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
          {
            l_intIndex = l_intIndex + 1;
            l_strLabID=l_arrLabwareIDs.GetAt(l_intIndex-1);
            _GetCarrierAndSiteID(ML_STAR, l_strLabID, l_strCarrier, l_strCarrierSite);
            if (l_strCarrier == l_strCarrierToLoad)
            {
              TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Labware:  "), l_strLabID, Translate(""));
              l_intTipType = DevGetLabwareData(ML_STAR, l_strLabID, Translate("MlStarTipRack"));
              DevGetBarcodeData(ML_STAR, l_strLabID, Translate(""), l_strBarcodeMask);
              l_arrBarcodeMasks.AddAsLast(l_strBarcodeMask);
              l_strSitesToScan = StrConcat4(l_strSitesToScan, l_strCarrierSite, Translate(""), Translate(""));
              if (l_intIndex < l_intTotalLabware)
              {
                l_strSitesToScan = StrConcat4(l_strSitesToScan, Translate(","), Translate(""), Translate(""));
              }
              if (l_strCarrierSite == "1")
              {
                l_strSite1 = l_strPlateDescription;
                l_arrLabwareToLoad.SetAt(1-1, l_strLabID);
                l_blnEnable1 = ASWGLOBAL::BOOL::TRUE;
                l_arrLabware.AddAsLast(l_strLabID);
                l_arrLabwareVisState.AddAsLast(5);
              }
              if (l_strCarrierSite == "2")
              {
                l_strSite2 = l_strPlateDescription;
                l_arrLabwareToLoad.SetAt(2-1, l_strLabID);
                l_blnEnable2 = ASWGLOBAL::BOOL::TRUE;
                l_arrLabware.AddAsLast(l_strLabID);
                l_arrLabwareVisState.AddAsLast(5);
              }
              if (l_strCarrierSite == "3")
              {
                l_strSite3 = l_strPlateDescription;
                l_arrLabwareToLoad.SetAt(3-1, l_strLabID);
                l_blnEnable3 = ASWGLOBAL::BOOL::TRUE;
                l_arrLabware.AddAsLast(l_strLabID);
                l_arrLabwareVisState.AddAsLast(5);
              }
              if (l_strCarrierSite == "4")
              {
                l_strSite4 = l_strPlateDescription;
                l_arrLabwareToLoad.SetAt(4-1, l_strLabID);
                l_blnEnable4 = ASWGLOBAL::BOOL::TRUE;
                l_arrLabware.AddAsLast(l_strLabID);
                l_arrLabwareVisState.AddAsLast(5);
              }
              if (l_strCarrierSite == "5")
              {
                l_strSite5 = l_strPlateDescription;
                l_arrLabwareToLoad.SetAt(5-1, l_strLabID);
                l_blnEnable5 = ASWGLOBAL::BOOL::TRUE;
                l_arrLabware.AddAsLast(l_strLabID);
                l_arrLabwareVisState.AddAsLast(5);
              }
            }
          }
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier to Load:  "), l_strCarrierToLoad, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Sites to Load:  "), l_strSitesToScan, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier Label Name:  "), l_strCarrierLabelName, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier Mask:  "), l_strCarrierMask, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Tracks to load:  "), l_strTracksDescription, Translate(""));
        l_strCarrierInfo = StrConcat4(l_strCarrierLabelName, Translate(" :: Track "), l_strTracksDescription, Translate(""));
        _UpdateStatus(l_strCarrierInfo, ASWGLOBAL::BOOL::TRUE);
        Util2::Debug::TraceArray(Translate("Labware to Load"), l_arrLabwareToLoad);
        if (l_blnEnable1 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strBarcode1 = Translate("");
        }
        else
        {
          l_strBarcode1 = Translate("BLANK");
        }
        if (l_blnEnable2 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strBarcode2 = Translate("");
        }
        else
        {
          l_strBarcode2 = Translate("BLANK");
        }
        if (l_blnEnable3 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strBarcode3 = Translate("");
        }
        else
        {
          l_strBarcode3 = Translate("BLANK");
        }
        if (l_blnEnable4 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strBarcode4 = Translate("");
        }
        else
        {
          l_strBarcode4 = Translate("BLANK");
        }
        if (l_blnEnable5 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strBarcode5 = Translate("");
        }
        else
        {
          l_strBarcode5 = Translate("BLANK");
        }
        DeckVisualize::UpdateLoadedLabware(ML_STAR, l_arrLabware, l_arrLabwareVisState, Translate(""));
        if (DATA_CONTROLLER::SYSTEM::AUTOLOAD == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        }
        if (l_blnBarcodeValidation == ASWGLOBAL::BOOL::TRUE)
        {
          customDialog_17.InitCustomDialog("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");
          customDialog_17.SetCustomDialogProperty( "textBlock7.Text", l_strCarrierLabelName );
          customDialog_17.SetCustomDialogProperty( "textBlock3.Text", l_strSite1 );
          customDialog_17.SetCustomDialogProperty( "textBlock4.Text", l_strSite2 );
          customDialog_17.SetCustomDialogProperty( "textBlock5.Text", l_strSite3 );
          customDialog_17.SetCustomDialogProperty( "textBlock6.Text", l_strSite4 );
          customDialog_17.SetCustomDialogProperty( "textBlock8.Text", l_strSite5 );
          customDialog_17.SetCustomDialogProperty( "textBox1.IsVisible", l_blnEnable1 );
          customDialog_17.SetCustomDialogProperty( "textBox1.Text", l_strBarcode1 );
          customDialog_17.SetCustomDialogProperty( "textBox2.IsVisible", l_blnEnable2 );
          customDialog_17.SetCustomDialogProperty( "textBox2.Text", l_strBarcode2 );
          customDialog_17.SetCustomDialogProperty( "textBox3.IsVisible", l_blnEnable3 );
          customDialog_17.SetCustomDialogProperty( "textBox3.Text", l_strBarcode3 );
          customDialog_17.SetCustomDialogProperty( "textBox4.IsVisible", l_blnEnable4 );
          customDialog_17.SetCustomDialogProperty( "textBox4.Text", l_strBarcode4 );
          customDialog_17.SetCustomDialogProperty( "textBox5.IsVisible", l_blnEnable5 );
          customDialog_17.SetCustomDialogProperty( "textBox5.Text", l_strBarcode5 );
          customDialog_17.SetCustomDialogProperty( "textBlock10.Text", l_strTracksDescription );
          customDialog_17.ShowCustomDialog();
          l_intDialogReturn = customDialog_17.GetCustomDialogProperty( "ReturnValue" );
          l_strBarcode1 = customDialog_17.GetCustomDialogProperty( "textBox1.Text" );
          l_strBarcode2 = customDialog_17.GetCustomDialogProperty( "textBox2.Text" );
          l_strBarcode3 = customDialog_17.GetCustomDialogProperty( "textBox3.Text" );
          l_strBarcode4 = customDialog_17.GetCustomDialogProperty( "textBox4.Text" );
          l_strBarcode5 = customDialog_17.GetCustomDialogProperty( "textBox5.Text" );
        }
        else
        {
          customDialog_18.InitCustomDialog("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");
          customDialog_18.SetCustomDialogProperty( "textBlock7.Text", l_strCarrierLabelName );
          customDialog_18.SetCustomDialogProperty( "textBlock3.Text", l_strSite1 );
          customDialog_18.SetCustomDialogProperty( "textBlock4.Text", l_strSite2 );
          customDialog_18.SetCustomDialogProperty( "textBlock5.Text", l_strSite3 );
          customDialog_18.SetCustomDialogProperty( "textBlock6.Text", l_strSite4 );
          customDialog_18.SetCustomDialogProperty( "textBlock8.Text", l_strSite5 );
          customDialog_18.SetCustomDialogProperty( "textBox1.IsVisible", l_blnEnable1 );
          customDialog_18.SetCustomDialogProperty( "textBox1.Text", l_strBarcode1 );
          customDialog_18.SetCustomDialogProperty( "textBox2.IsVisible", l_blnEnable2 );
          customDialog_18.SetCustomDialogProperty( "textBox2.Text", l_strBarcode2 );
          customDialog_18.SetCustomDialogProperty( "textBox3.IsVisible", l_blnEnable3 );
          customDialog_18.SetCustomDialogProperty( "textBox3.Text", l_strBarcode3 );
          customDialog_18.SetCustomDialogProperty( "textBox4.IsVisible", l_blnEnable4 );
          customDialog_18.SetCustomDialogProperty( "textBox4.Text", l_strBarcode4 );
          customDialog_18.SetCustomDialogProperty( "textBox5.IsVisible", l_blnEnable5 );
          customDialog_18.SetCustomDialogProperty( "textBox5.Text", l_strBarcode5 );
          customDialog_18.SetCustomDialogProperty( "textBlock10.Text", l_strTracksDescription );
          customDialog_18.ShowCustomDialog();
          l_intDialogReturn = customDialog_18.GetCustomDialogProperty( "ReturnValue" );
          l_strBarcode1 = customDialog_18.GetCustomDialogProperty( "textBox1.Text" );
          l_strBarcode2 = customDialog_18.GetCustomDialogProperty( "textBox2.Text" );
          l_strBarcode3 = customDialog_18.GetCustomDialogProperty( "textBox3.Text" );
          l_strBarcode4 = customDialog_18.GetCustomDialogProperty( "textBox4.Text" );
          l_strBarcode5 = customDialog_18.GetCustomDialogProperty( "textBox5.Text" );
        }
        l_arrLabware.SetSize(0);
        l_arrLabwareVisState.SetSize(0);
        if (l_blnEnable1 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(1-1);
          l_blnNull = HSLExtensions::Core::IsEmptyString(l_strBarcode1);
          if (l_blnNull == ASWGLOBAL::BOOL::TRUE)
          {
            l_strBarcode1 = Translate("NO BARCODE");
          }
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode1);
          l_arrLabware.AddAsLast(l_strLabID);
          l_arrLabwareVisState.AddAsLast(1);
          l_arrPlatesScanned.AddAsLast(l_strBarcode1);
        }
        if (l_blnEnable2 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(2-1);
          l_blnNull = HSLExtensions::Core::IsEmptyString(l_strBarcode2);
          if (l_blnNull == ASWGLOBAL::BOOL::TRUE)
          {
            l_strBarcode2 = Translate("NO BARCODE");
          }
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode2);
          l_arrLabware.AddAsLast(l_strLabID);
          l_arrLabwareVisState.AddAsLast(1);
          l_arrPlatesScanned.AddAsLast(l_strBarcode2);
        }
        if (l_blnEnable3 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(3-1);
          l_blnNull = HSLExtensions::Core::IsEmptyString(l_strBarcode3);
          if (l_blnNull == ASWGLOBAL::BOOL::TRUE)
          {
            l_strBarcode3 = Translate("NO BARCODE");
          }
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode3);
          l_arrLabware.AddAsLast(l_strLabID);
          l_arrLabwareVisState.AddAsLast(1);
          l_arrPlatesScanned.AddAsLast(l_strBarcode3);
        }
        if (l_blnEnable4 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(4-1);
          l_blnNull = HSLExtensions::Core::IsEmptyString(l_strBarcode4);
          if (l_blnNull == ASWGLOBAL::BOOL::TRUE)
          {
            l_strBarcode4 = Translate("NO BARCODE");
          }
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode4);
          l_arrLabware.AddAsLast(l_strLabID);
          l_arrLabwareVisState.AddAsLast(1);
          l_arrPlatesScanned.AddAsLast(l_strBarcode4);
        }
        if (l_blnEnable5 == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLabID=l_arrLabwareToLoad.GetAt(5-1);
          l_blnNull = HSLExtensions::Core::IsEmptyString(l_strBarcode5);
          if (l_blnNull == ASWGLOBAL::BOOL::TRUE)
          {
            l_strBarcode5 = Translate("NO BARCODE");
          }
          STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode5);
          l_arrLabware.AddAsLast(l_strLabID);
          l_arrLabwareVisState.AddAsLast(1);
          l_arrPlatesScanned.AddAsLast(l_strBarcode5);
        }
        DeckVisualize::UpdateLoadedLabware(ML_STAR, l_arrLabware, l_arrLabwareVisState, Translate(""));
      }
    }
    l_blnFileExists = HSLExtensions::File::Exists(DATA_CONTROLLER::STR::FILE::REPORT_FILE_TEMPLATE);
    if (l_blnFileExists == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
    l_intPlatesScanned=l_arrPlatesScanned.GetSize();
    ExcelEdit::OpenFile(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate("CoverSheet"));
    l_intLineIndex = 20;
    {
      for(l_intPlateIndex = 0; l_intPlateIndex < l_intPlatesScanned;)
      {
        l_intPlateIndex = l_intPlateIndex + 1;
        ExcelEdit::UpdateCell(3, l_intLineIndex, l_arrPlatesScanned.ElementAt( l_intPlateIndex -1), ExcelEdit::CELL_TYPE::STRING);
        l_intLineIndex = l_intLineIndex + 1;
      }
    }
    ExcelEdit::CloseFile();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function SHOW_MethodStart( device & ML_STAR ) void {
    private variable l_blnFileExists;
    private dialog customDialog_19;
    private variable l_intDialogReturn;
    private variable l_strTipType;
    private variable l_fltVolume;
    private variable l_intVolume;
    private variable l_strVolume;
    private variable l_intReagentLine;
    private variable l_strLiquidClass;
    private variable l_intTotalVolumes;
    private variable l_arrVolumesRange[];
    private variable l_intIndex;
    private variable l_fltDiluentVolume;
    private variable l_intTotalLiquidClass;
    private variable l_arrLiquidClassRange[];
    private variable l_intTotalSolutions;
    private variable l_arrSolutions[];
    private variable l_blnDoorClosed;
    private dialog customDialog_20;
    private timer l_hdlTimer;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    if (DATA_CONTROLLER::SYSTEM::AUTOLOAD == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    customDialog_19.InitCustomDialog("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");
    customDialog_19.ShowCustomDialog();
    l_intDialogReturn = customDialog_19.GetCustomDialogProperty( "ReturnValue" );
    _UpdateStatus(Translate("Start method!"), ASWGLOBAL::BOOL::FALSE);
    _GetDoorCloseStatus(ML_STAR, l_blnDoorClosed);
    {
      while (l_blnDoorClosed == ASWGLOBAL::BOOL::FALSE)
      {
        customDialog_20.InitCustomDialog("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");
        customDialog_20.ShowCustomDialog();
        l_intDialogReturn = customDialog_20.GetCustomDialogProperty( "ReturnValue" );
        if( 0 == l_hdlTimer.SetTimer(0.5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == l_hdlTimer.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _GetDoorCloseStatus(ML_STAR, l_blnDoorClosed);
      }
    }
    _LockDoor(ML_STAR);
    if( 0 == DATA_CONTROLLER::TIMER::RUN_TIME.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_blnFileExists = HSLExtensions::File::Exists(DATA_CONTROLLER::STR::FILE::REPORT_FILE_TEMPLATE);
    if (l_blnFileExists == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
    ExcelEdit::OpenFile(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate("CoverSheet"));
    if(0){
      if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
      {
        ExcelEdit::UpdateCell(10, 5, Translate("STARlet"), ExcelEdit::CELL_TYPE::STRING);
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
      {
        ExcelEdit::UpdateCell(10, 5, Translate("STAR"), ExcelEdit::CELL_TYPE::STRING);
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
      {
        ExcelEdit::UpdateCell(10, 5, Translate("STARPlus"), ExcelEdit::CELL_TYPE::STRING);
      }
      if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_13 == ASWGLOBAL::BOOL::TRUE)
      {
        ExcelEdit::UpdateCell(10, 5, Translate("Vantage 1.3m"), ExcelEdit::CELL_TYPE::STRING);
      }
      if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_20 == ASWGLOBAL::BOOL::TRUE)
      {
        ExcelEdit::UpdateCell(10, 5, Translate("Vantage 2.0m"), ExcelEdit::CELL_TYPE::STRING);
      }
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
    {
      l_strMachineType = Translate("STARlet");
      ExcelEdit::UpdateCell(10, 5, l_strMachineType, ExcelEdit::CELL_TYPE::STRING);
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
    {
      l_strMachineType = Translate("STAR");
      ExcelEdit::UpdateCell(10, 5, l_strMachineType, ExcelEdit::CELL_TYPE::STRING);
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
    {
      l_strMachineType = Translate("STARPlus");
      ExcelEdit::UpdateCell(10, 5, l_strMachineType, ExcelEdit::CELL_TYPE::STRING);
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_13 == ASWGLOBAL::BOOL::TRUE)
    {
      l_strMachineType = Translate("Vantage 1.3m");
      ExcelEdit::UpdateCell(10, 5, l_strMachineType, ExcelEdit::CELL_TYPE::STRING);
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_20 == ASWGLOBAL::BOOL::TRUE)
    {
      l_strMachineType = Translate("Vantage 2.0m");
      ExcelEdit::UpdateCell(10, 5, l_strMachineType, ExcelEdit::CELL_TYPE::STRING);
    }
    ExcelEdit::UpdateCell(10, 6, DATA_CONTROLLER::STR::SERIAL_NUMBER, ExcelEdit::CELL_TYPE::STRING);
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::TRUE)
    {
      ExcelEdit::UpdateCell(10, 7, Translate("1 mL Channels"), ExcelEdit::CELL_TYPE::STRING);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS_XL == ASWGLOBAL::BOOL::TRUE)
    {
      ExcelEdit::UpdateCell(10, 7, Translate("5 mL Channels"), ExcelEdit::CELL_TYPE::STRING);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
    {
      ExcelEdit::UpdateCell(10, 7, Translate("MPH 96"), ExcelEdit::CELL_TYPE::STRING);
    }
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Tip"), l_strTipType);
    if (DATA_CONTROLLER::BLN::TIPS_FILTER == ASWGLOBAL::BOOL::TRUE)
    {
      l_strTipType = StrConcat4(l_strTipType, Translate(" "), Translate("Filtered"), Translate(""));
    }
    if (DATA_CONTROLLER::BLN::TIPS_STERILE == ASWGLOBAL::BOOL::TRUE)
    {
      l_strTipType = StrConcat4(Translate("Sterile "), Translate(" "), l_strTipType, Translate(""));
    }
    ExcelEdit::UpdateCell(10, 8, l_strTipType, ExcelEdit::CELL_TYPE::STRING);
    l_intReagentLine = 11;
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    if (DATA_CONTROLLER::PROCESS::PREPARE_VERIFICATION_PLATE == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Base"), l_fltVolume);
      if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::TRUE)
      {
        CONFIGURATIONEDITOR::GetConfigurationValue(Translate("LiquidClassBaseline"), l_strLiquidClass);
      }
      if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
      {
        CONFIGURATIONEDITOR::GetConfigurationValue(Translate("LiquidClassBaselineMPH"), l_strLiquidClass);
      }
      _ConvertToInteger(l_fltVolume, l_intVolume);
      l_strVolume = StrConcat4(l_intVolume, Translate(".0 "), Translate("µL"), Translate(""));
      ExcelEdit::UpdateCell(2, l_intReagentLine, Translate("Baseline"), ExcelEdit::CELL_TYPE::STRING);
      ExcelEdit::UpdateCell(3, l_intReagentLine, l_strVolume, ExcelEdit::CELL_TYPE::STRING);
      ExcelEdit::UpdateCell(4, l_intReagentLine, l_strLiquidClass, ExcelEdit::CELL_TYPE::STRING);
      l_intReagentLine = l_intReagentLine + 1;
    }
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Diluent"), l_fltVolume);
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationValue(Translate("LiquidClassDiluent"), l_strLiquidClass);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationValue(Translate("LiquidClassDiluentMPH"), l_strLiquidClass);
    }
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Volume"), Translate("f"), l_arrVolumesRange, l_intTotalVolumes);
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::FALSE)
    {
      if (DATA_CONTROLLER::PROCESS::SETUP_DILUENT == ASWGLOBAL::BOOL::TRUE)
      {
        {
          for(l_intIndex = 0; l_intIndex < l_intTotalVolumes;)
          {
            l_intIndex = l_intIndex + 1;
            l_fltDiluentVolume = l_fltVolume - l_arrVolumesRange.ElementAt( l_intIndex -1);
            _ConvertToInteger(l_fltDiluentVolume, l_intVolume);
            l_strVolume = StrConcat4(l_intVolume, Translate(".0 "), Translate("µL"), Translate(""));
            if (l_fltDiluentVolume > 0.0)
            {
              ExcelEdit::UpdateCell(2, l_intReagentLine, Translate("Diluent"), ExcelEdit::CELL_TYPE::STRING);
              ExcelEdit::UpdateCell(3, l_intReagentLine, l_strVolume, ExcelEdit::CELL_TYPE::STRING);
              ExcelEdit::UpdateCell(4, l_intReagentLine, l_strLiquidClass, ExcelEdit::CELL_TYPE::STRING);
              l_intReagentLine = l_intReagentLine + 1;
            }
          }
        }
      }
    }
    else
    {
      if (DATA_CONTROLLER::PROCESS::SETUP_DILUENT == ASWGLOBAL::BOOL::TRUE)
      {
        l_fltDiluentVolume = l_fltVolume - DATA_CONTROLLER::FLT::SELECTED_RANGE_VOLUME;
        _ConvertToInteger(l_fltDiluentVolume, l_intVolume);
        l_strVolume = StrConcat4(l_intVolume, Translate(".0 "), Translate("µL"), Translate(""));
        if (l_fltDiluentVolume > 0.0)
        {
          ExcelEdit::UpdateCell(2, l_intReagentLine, Translate("Diluent"), ExcelEdit::CELL_TYPE::STRING);
          ExcelEdit::UpdateCell(3, l_intReagentLine, l_strVolume, ExcelEdit::CELL_TYPE::STRING);
          ExcelEdit::UpdateCell(4, l_intReagentLine, l_strLiquidClass, ExcelEdit::CELL_TYPE::STRING);
          l_intReagentLine = l_intReagentLine + 1;
        }
      }
    }
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Volume"), Translate("f"), l_arrVolumesRange, l_intTotalVolumes);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("LiquidClass"), Translate("s"), l_arrLiquidClassRange, l_intTotalLiquidClass);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Solution"), Translate("s"), l_arrSolutions, l_intTotalSolutions);
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::FALSE)
    {
      if (DATA_CONTROLLER::PROCESS::SETUP_RANGE == ASWGLOBAL::BOOL::TRUE)
      {
        {
          for(l_intIndex = 0; l_intIndex < l_intTotalVolumes;)
          {
            l_intIndex = l_intIndex + 1;
            _ConvertToInteger(l_arrVolumesRange.ElementAt( l_intIndex -1), l_intVolume);
            l_strVolume = StrConcat4(l_intVolume, Translate(".0 "), Translate("µL"), Translate(""));
            ExcelEdit::UpdateCell(2, l_intReagentLine, l_arrSolutions.ElementAt( l_intIndex -1), ExcelEdit::CELL_TYPE::STRING);
            ExcelEdit::UpdateCell(3, l_intReagentLine, l_strVolume, ExcelEdit::CELL_TYPE::STRING);
            ExcelEdit::UpdateCell(4, l_intReagentLine, l_arrLiquidClassRange.ElementAt( l_intIndex -1), ExcelEdit::CELL_TYPE::STRING);
            l_intReagentLine = l_intReagentLine + 1;
          }
        }
      }
    }
    else
    {
      if (DATA_CONTROLLER::PROCESS::SETUP_RANGE == ASWGLOBAL::BOOL::TRUE)
      {
        _ConvertToInteger(DATA_CONTROLLER::FLT::SELECTED_RANGE_VOLUME, l_intVolume);
        l_strVolume = StrConcat4(l_intVolume, Translate(".0 "), Translate("µL"), Translate(""));
        ExcelEdit::UpdateCell(2, l_intReagentLine, DATA_CONTROLLER::STR::SELECTED_RANGE_SOLUTION, ExcelEdit::CELL_TYPE::STRING);
        ExcelEdit::UpdateCell(3, l_intReagentLine, l_strVolume, ExcelEdit::CELL_TYPE::STRING);
        ExcelEdit::UpdateCell(4, l_intReagentLine, DATA_CONTROLLER::STR::SELECTED_RANGE_LIQUIDCLASS, ExcelEdit::CELL_TYPE::STRING);
        l_intReagentLine = l_intReagentLine + 1;
      }
    }
    {
      while (l_intReagentLine <= 17)
      {
        ExcelEdit::UpdateCell(2, l_intReagentLine, Translate(" "), ExcelEdit::CELL_TYPE::STRING);
        ExcelEdit::UpdateCell(3, l_intReagentLine, Translate(" "), ExcelEdit::CELL_TYPE::STRING);
        ExcelEdit::UpdateCell(4, l_intReagentLine, Translate(" "), ExcelEdit::CELL_TYPE::STRING);
        l_intReagentLine = l_intReagentLine + 1;
      }
    }
    ExcelEdit::CloseFile();
    DATA_CONTROLLER::BLN::WRITE_OUTPUT_FILE = ASWGLOBAL::BOOL::TRUE;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function SHOW_MethodFinish( variable i_blnSuccess ) void {
    private variable l_intDialogReturn;
    private dialog customDialog_21;
    private dialog customDialog_22;
    private variable l_intTotalRunTime;
    private variable l_blnFileExists;
    private variable l_strRunTime;
    private variable l_strTimeScale;
    private variable l_arrRackBarcodes[];
    private variable l_arrReagentBarcodes[];
    private variable l_arrWells[];
    private variable l_intCurrentRow;
    private variable l_strCurrentBarcode;
    private variable l_strStartWell;
    private variable l_strReagent;
    private variable l_strCurrentReagentVolume;
    private variable l_intIndex;
    private variable l_intMax;
    private variable l_strPlate;
    private variable l_strWell;
    private variable l_arrVolumes[];
    private variable l_strVolume;
    private variable l_strCurrentReagent;
    private variable l_strWellRange;
    private variable l_intVolume;
    private variable l_arrTransferName[];
    private variable l_strTransferName;
    private variable l_blnLocalReportValid;
    private variable l_strDate;
    private variable l_strTime;
    private variable l_strTipSize;
    private variable l_strFinalLocalFile;
    private variable l_strChannel;
    private variable l_blnNetworkReportValid;
    private variable l_strFinalNetworkFile;
    private variable l_arrDirectories[];
    private variable l_strDrive;
    private variable l_blnDriveReady;
    private dialog customDialog_23;
    private variable l_strFunctionName;
    private dialog customDialog_24;
    private dialog customDialog_25;
    private variable l_strTipSize_;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    l_intTotalRunTime = DATA_CONTROLLER::TIMER::RUN_TIME.GetElapsedTime();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Total Run Time:  "), l_intTotalRunTime, Translate(" seconds"));
    _UpdateStatus(Translate("Method finished!"), ASWGLOBAL::BOOL::FALSE);
    if (i_blnSuccess == ASWGLOBAL::BOOL::TRUE)
    {
      customDialog_21.InitCustomDialog("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");
      customDialog_21.ShowCustomDialog();
      l_intDialogReturn = customDialog_21.GetCustomDialogProperty( "ReturnValue" );
    }
    else
    {
      customDialog_22.InitCustomDialog("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");
      customDialog_22.ShowCustomDialog();
      l_intDialogReturn = customDialog_22.GetCustomDialogProperty( "ReturnValue" );
    }
    l_blnFileExists = HSLExtensions::File::Exists(DATA_CONTROLLER::STR::FILE::REPORT_FILE_TEMPLATE);
    if (l_blnFileExists == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
    if (DATA_CONTROLLER::BLN::WRITE_OUTPUT_FILE == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
    ExcelEdit::OpenFile(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate("CoverSheet"));
    l_strTimeScale = Translate("seconds");
    _ConvertToInteger(l_intTotalRunTime, l_intTotalRunTime);
    if (l_intTotalRunTime > 60)
    {
      l_strTimeScale = Translate("minute");
      l_intTotalRunTime = l_intTotalRunTime / 60;
      if (l_intTotalRunTime > 1)
      {
        l_strTimeScale = StrConcat2(l_strTimeScale, Translate("s"));
      }
    }
    if (l_intTotalRunTime > 60)
    {
      l_strTimeScale = Translate("hour");
      l_intTotalRunTime = l_intTotalRunTime / 60;
      if (l_intTotalRunTime > 1)
      {
        l_strTimeScale = StrConcat2(l_strTimeScale, Translate("s"));
      }
    }
    l_strRunTime = StrConcat4(l_intTotalRunTime, Translate(" "), l_strTimeScale, Translate(""));
    ExcelEdit::UpdateCell(4, 7, l_strRunTime, ExcelEdit::CELL_TYPE::STRING);
    ExcelEdit::CloseFile();
    l_arrTransferName = ExcelEdit::ReadColumn(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate("Report"), 1, ExcelEdit::CELL_TYPE::STRING);
    l_arrRackBarcodes = ExcelEdit::ReadColumn(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate("Report"), 10, ExcelEdit::CELL_TYPE::STRING);
    l_arrReagentBarcodes = ExcelEdit::ReadColumn(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate("Report"), 3, ExcelEdit::CELL_TYPE::STRING);
    l_arrWells = ExcelEdit::ReadColumn(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate("Report"), 13, ExcelEdit::CELL_TYPE::STRING);
    l_arrVolumes = ExcelEdit::ReadColumn(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate("Report"), 7, ExcelEdit::CELL_TYPE::STRING);
    l_intCurrentRow = 31;
    l_strCurrentBarcode = Translate("");
    l_strCurrentReagentVolume = Translate("");
    l_strCurrentReagent = Translate("");
    l_strStartWell = Translate("");
    l_intIndex = 2;
    l_intMax=l_arrRackBarcodes.GetSize();
    ExcelEdit::OpenFile(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate("CoverSheet"));
    {
      while (l_intCurrentRow <= 37)
      {
        if (l_intIndex > l_intMax)
        {
          break;
        }
        l_strTransferName=l_arrTransferName.GetAt(l_intIndex-1);
        l_strReagent=l_arrReagentBarcodes.GetAt(l_intIndex-1);
        l_strPlate=l_arrRackBarcodes.GetAt(l_intIndex-1);
        l_strWell=l_arrWells.GetAt(l_intIndex-1);
        l_strVolume=l_arrVolumes.GetAt(l_intIndex-1);
        if (l_strCurrentReagentVolume == "")
        {
          l_strStartWell = l_strWell;
          l_strCurrentBarcode = l_strPlate;
          l_strCurrentReagentVolume = l_strVolume;
          l_strCurrentReagent = l_strReagent;
        }
        if (l_strReagent != l_strCurrentReagent)
        {
          l_intIndex = l_intIndex - 1;
          l_strTransferName=l_arrTransferName.GetAt(l_intIndex-1);
          l_strWell=l_arrWells.GetAt(l_intIndex-1);
          l_strVolume=l_arrVolumes.GetAt(l_intIndex-1);
          l_strPlate=l_arrRackBarcodes.GetAt(l_intIndex-1);
          l_strReagent=l_arrReagentBarcodes.GetAt(l_intIndex-1);
          l_strCurrentReagent = l_strTransferName;
          if (l_strWell == l_strStartWell)
          {
            l_strWellRange = l_strWell;
          }
          else
          {
            l_strWellRange = StrConcat4(l_strStartWell, Translate(" - "), l_strWell, Translate(""));
          }
          _ConvertToInteger(l_strCurrentReagentVolume, l_intVolume);
          l_strVolume = StrConcat4(l_intVolume, Translate(".0 "), Translate("µL"), Translate(""));
          if (l_strTransferName != "Diluent")
          {
            ExcelEdit::UpdateCell(3, l_intCurrentRow, l_strCurrentBarcode, ExcelEdit::CELL_TYPE::STRING);
            ExcelEdit::UpdateCell(5, l_intCurrentRow, l_strWellRange, ExcelEdit::CELL_TYPE::STRING);
            ExcelEdit::UpdateCell(7, l_intCurrentRow, l_strCurrentReagent, ExcelEdit::CELL_TYPE::STRING);
            ExcelEdit::UpdateCell(9, l_intCurrentRow, l_strVolume, ExcelEdit::CELL_TYPE::STRING);
            l_intCurrentRow = l_intCurrentRow + 1;
          }
          l_strCurrentBarcode = Translate("");
          l_strCurrentReagentVolume = Translate("");
          l_strCurrentReagent = Translate("");
          l_strStartWell = Translate("");
        }
        else
        {
          if (l_strPlate != l_strCurrentBarcode)
          {
            l_intIndex = l_intIndex - 1;
            l_strTransferName=l_arrTransferName.GetAt(l_intIndex-1);
            l_strWell=l_arrWells.GetAt(l_intIndex-1);
            l_strVolume=l_arrVolumes.GetAt(l_intIndex-1);
            l_strPlate=l_arrRackBarcodes.GetAt(l_intIndex-1);
            l_strReagent=l_arrReagentBarcodes.GetAt(l_intIndex-1);
            l_strCurrentReagent = l_strTransferName;
            if (l_strWell == l_strStartWell)
            {
              l_strWellRange = l_strWell;
            }
            else
            {
              l_strWellRange = StrConcat4(l_strStartWell, Translate(" - "), l_strWell, Translate(""));
            }
            _ConvertToInteger(l_strCurrentReagentVolume, l_intVolume);
            l_strVolume = StrConcat4(l_intVolume, Translate(".0 "), Translate("µL"), Translate(""));
            if (l_strTransferName != "Diluent")
            {
              ExcelEdit::UpdateCell(3, l_intCurrentRow, l_strCurrentBarcode, ExcelEdit::CELL_TYPE::STRING);
              ExcelEdit::UpdateCell(5, l_intCurrentRow, l_strWellRange, ExcelEdit::CELL_TYPE::STRING);
              ExcelEdit::UpdateCell(7, l_intCurrentRow, l_strCurrentReagent, ExcelEdit::CELL_TYPE::STRING);
              ExcelEdit::UpdateCell(9, l_intCurrentRow, l_strVolume, ExcelEdit::CELL_TYPE::STRING);
              l_intCurrentRow = l_intCurrentRow + 1;
            }
            l_strCurrentBarcode = Translate("");
            l_strCurrentReagentVolume = Translate("");
            l_strCurrentReagent = Translate("");
            l_strStartWell = Translate("");
          }
        }
        if (l_intIndex == l_intMax)
        {
          l_strCurrentReagent = l_strTransferName;
          if (l_strWell == l_strStartWell)
          {
            l_strWellRange = l_strWell;
          }
          else
          {
            l_strWellRange = StrConcat4(l_strStartWell, Translate(" - "), l_strWell, Translate(""));
          }
          _ConvertToInteger(l_strCurrentReagentVolume, l_intVolume);
          l_strVolume = StrConcat4(l_intVolume, Translate(".0 "), Translate("µL"), Translate(""));
          if (l_strTransferName != "Diluent")
          {
            ExcelEdit::UpdateCell(3, l_intCurrentRow, l_strCurrentBarcode, ExcelEdit::CELL_TYPE::STRING);
            ExcelEdit::UpdateCell(5, l_intCurrentRow, l_strWellRange, ExcelEdit::CELL_TYPE::STRING);
            ExcelEdit::UpdateCell(7, l_intCurrentRow, l_strCurrentReagent, ExcelEdit::CELL_TYPE::STRING);
            ExcelEdit::UpdateCell(9, l_intCurrentRow, l_strVolume, ExcelEdit::CELL_TYPE::STRING);
            l_intCurrentRow = l_intCurrentRow + 1;
          }
          l_strCurrentBarcode = Translate("");
          l_strCurrentReagentVolume = Translate("");
          l_strCurrentReagent = Translate("");
          l_strStartWell = Translate("");
        }
        l_intIndex = l_intIndex + 1;
      }
    }
    ExcelEdit::CloseFile();
    l_strDate = TimGetFormattedDate(Translate("%y%m%d"));
    l_strTime = TimGetFormattedTime(Translate("%H%M"));
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Tip"), l_strTipSize);
    l_strTipSize_ = StrConcat2(l_strTipSize, Translate("_"));
    l_blnLocalReportValid = HSLExtensions::Core::IsNull(DATA_CONTROLLER::STR::FILE::LOCAL_OUTPUT_LOCATION);
    if (l_blnLocalReportValid == ASWGLOBAL::BOOL::FALSE)
    {
      HSLExtensions::Directory::Create(DATA_CONTROLLER::STR::FILE::LOCAL_OUTPUT_LOCATION);
      if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::TRUE)
      {
        l_strChannel = Translate("Channel_");
      }
      if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS_XL == ASWGLOBAL::BOOL::TRUE)
      {
        l_strChannel = Translate("ChannelXL_");
      }
      if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
      {
        l_strChannel = Translate("MPH96_");
      }
      if(0){
        l_strFinalLocalFile = StrConcat8(DATA_CONTROLLER::STR::FILE::LOCAL_OUTPUT_LOCATION, Translate("\\"), l_strDate, l_strTime, Translate("_"), l_strChannel, l_strTipSize, Translate(".xls"));
        l_strFinalLocalFile = StrConcat8(DATA_CONTROLLER::STR::FILE::LOCAL_OUTPUT_LOCATION, Translate("\\"), l_strDate, Translate("_"), l_strChannel, l_strTipSize, DATA_CONTROLLER::STR::SERIAL_NUMBER, Translate(".xls"));
      }
      if (l_strChannel == "MPH96_")
      {
        l_strFinalLocalFile = StrConcat12(DATA_CONTROLLER::STR::FILE::LOCAL_OUTPUT_LOCATION, Translate("\\"), l_strDate, Translate("_"), l_strChannel, l_strTipSize_, l_strVolume, Translate("_"), l_strMachineType, Translate("_"), DATA_CONTROLLER::STR::SERIAL_NUMBER, Translate(".xls"));
      }
      else
      {
        l_strFinalLocalFile = StrConcat12(DATA_CONTROLLER::STR::FILE::LOCAL_OUTPUT_LOCATION, Translate("\\"), l_strDate, Translate("_"), l_strChannel, l_strTipSize, Translate("_"), l_strMachineType, Translate("_"), DATA_CONTROLLER::STR::SERIAL_NUMBER, Translate(""), Translate(".xls"));
      }
      StrReplace(l_strFinalLocalFile, Translate("\\\\"), Translate("\\"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Local File:  "), l_strFinalLocalFile, Translate(""));
      HSLExtensions::File::Copy(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, l_strFinalLocalFile, ASWGLOBAL::BOOL::TRUE);
    }
    l_blnNetworkReportValid = HSLExtensions::Core::IsEmptyString(DATA_CONTROLLER::STR::FILE::NETWORK_OUTPUT_LOCATION);
    l_blnDriveReady = ASWGLOBAL::BOOL::FALSE;
    if (l_blnNetworkReportValid == ASWGLOBAL::BOOL::FALSE)
    {
      if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::TRUE)
      {
        l_strChannel = Translate("Channel_");
      }
      if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS_XL == ASWGLOBAL::BOOL::TRUE)
      {
        l_strChannel = Translate("ChannelXL_");
      }
      if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
      {
        l_strChannel = Translate("MPH96_");
      }
      l_strFinalNetworkFile = StrConcat8(DATA_CONTROLLER::STR::FILE::NETWORK_OUTPUT_LOCATION, Translate("\\"), l_strDate, l_strTime, Translate("_"), l_strChannel, l_strTipSize, Translate(".xls"));
      StrReplace(l_strFinalNetworkFile, Translate("\\\\"), Translate("\\"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Network File:  "), l_strFinalNetworkFile, Translate(""));
      l_arrDirectories = HSLExtensions::String::Split(l_strFinalNetworkFile, Translate("\\"), ASWGLOBAL::BOOL::TRUE);
      l_strDrive=l_arrDirectories.GetAt(1-1);
      l_blnDriveReady = HSLExtensions::Drive::IsReady(l_strDrive);
      {
        while (l_blnDriveReady == ASWGLOBAL::BOOL::FALSE)
        {
          if (l_blnDriveReady == ASWGLOBAL::BOOL::FALSE)
          {
            customDialog_23.InitCustomDialog("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");
            customDialog_23.SetCustomDialogProperty( "textBlock4.Text", l_strDrive );
            customDialog_23.ShowCustomDialog();
            l_intDialogReturn = customDialog_23.GetCustomDialogProperty( "ReturnValue" );
            if (l_intDialogReturn == ASWGLOBAL::DIALOG::ABORT)
            {
              break;
            }
          }
          l_blnDriveReady = HSLExtensions::Drive::IsReady(l_strDrive);
        }
      }
      if (l_blnDriveReady == ASWGLOBAL::BOOL::TRUE)
      {
        HSLExtensions::Directory::Create(DATA_CONTROLLER::STR::FILE::NETWORK_OUTPUT_LOCATION);
        HSLExtensions::File::Copy(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, l_strFinalNetworkFile, ASWGLOBAL::BOOL::TRUE);
      }
    }
    if (l_blnDriveReady == ASWGLOBAL::BOOL::TRUE)
    {
      customDialog_24.InitCustomDialog("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");
      customDialog_24.SetCustomDialogProperty( "textBlock3.Text", l_strFinalLocalFile );
      customDialog_24.SetCustomDialogProperty( "textBlock6.Text", l_strFinalNetworkFile );
      customDialog_24.ShowCustomDialog();
      l_intDialogReturn = customDialog_24.GetCustomDialogProperty( "ReturnValue" );
    }
    else
    {
      customDialog_25.InitCustomDialog("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");
      customDialog_25.SetCustomDialogProperty( "textBlock3.Text", l_strFinalLocalFile );
      customDialog_25.ShowCustomDialog();
      l_intDialogReturn = customDialog_25.GetCustomDialogProperty( "ReturnValue" );
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  private function _UnlockDoor( device & ML_STAR ) void {
    if(0){
      if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Disable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Disable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Disable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    MECC::TraceComment(Translate("Unlock Doors"));
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  }

  private function _LockDoor( device & ML_STAR ) void {
    MECC::TraceComment(Translate("Lock Doors"));
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    if(0){
      if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Re-Enable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Re-Enable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Re-Enable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
  }

  private function _GetDoorCloseStatus( device & ML_STAR, variable & o_blnDoorStatus ) void {
    private variable _strCoverIsLocked;
    private variable _boolCoverIsLocked;
    private variable _strFwRet;
    o_blnDoorStatus = 0;
    o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
    if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	_strFwRet = arrRetValues[3];
      }
      _strCoverIsLocked = StrRight(_strFwRet, 1);
      _boolCoverIsLocked = StrIVal(_strCoverIsLocked);
      if (_boolCoverIsLocked == 1)
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	_strFwRet = arrRetValues[3];
      }
      _strCoverIsLocked = StrRight(_strFwRet, 1);
      _boolCoverIsLocked = StrIVal(_strCoverIsLocked);
      if (_boolCoverIsLocked == 1)
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	_strFwRet = arrRetValues[3];
      }
      _strCoverIsLocked = StrRight(_strFwRet, 1);
      _boolCoverIsLocked = StrIVal(_strCoverIsLocked);
      if (_boolCoverIsLocked == 1)
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_13 == ASWGLOBAL::BOOL::TRUE)
    {
      o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_20 == ASWGLOBAL::BOOL::TRUE)
    {
      o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
    }
  }

  private function _UpdateStatus( variable i_strText, variable i_blnIndentText ) void {
    if (i_blnIndentText == ASWGLOBAL::BOOL::TRUE)
    {
      i_strText = StrConcat2(Translate("\t"), i_strText);
    }
    AswStatusDialog::AppendText(i_strText);
  }

  private function _GetVolumesPerLabID_Channels( device & ML_STAR, variable & i_arrLabID[], variable & o_arrVolumesNeeded[] ) void {
    private variable l_intDeckID;
    private variable l_strBarcodeMask;
    private variable l_strLabID;
    private variable l_intElementID;
    private variable l_intTotalLabware;
    private variable l_intIndex;
    private variable l_fltBase;
    private variable l_fltDiluent;
    private variable l_fltDeadVol;
    private variable l_intReplicates;
    private variable l_intTotalVolumes;
    private variable l_arrRangeVolumes[];
    private variable l_arrRangeNames[];
    private variable l_blnMaskFound;
    private variable l_intValueFound[];
    private variable i;
    private variable l_fltVolumePerWell;
    private variable l_fltVolume;
    private variable l_intVolume;
    private variable l_strVolume;
    o_arrVolumesNeeded.SetSize( 0);
    o_arrVolumesNeeded.SetSize(0);
    l_intDeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Base"), l_fltBase);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Diluent"), l_fltDiluent);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("ReservoirChannelsDeadVol"), l_fltDeadVol);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Replicates"), l_intReplicates);
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Solution"), Translate("s"), l_arrRangeNames, l_intTotalVolumes);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Volume"), Translate("f"), l_arrRangeVolumes, l_intTotalVolumes);
    l_intTotalLabware=i_arrLabID.GetSize();
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
      {
        l_intIndex = l_intIndex + 1;
        l_strLabID=i_arrLabID.GetAt(l_intIndex-1);
        l_fltVolume = 0.0;
        l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, l_strLabID);
        l_strBarcodeMask = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
        l_blnMaskFound = HSLExtensions::Array::ContainsValue(l_arrRangeNames, l_strBarcodeMask);
        if (l_blnMaskFound == ASWGLOBAL::BOOL::TRUE)
        {
          l_intValueFound = HSLExtensions::Array::FindValue(l_arrRangeNames, l_strBarcodeMask);
          i=l_intValueFound.GetAt(1-1);
          l_fltVolumePerWell=l_arrRangeVolumes.GetAt(i-1);
          l_fltVolume = l_fltVolumePerWell * 8;
          l_fltVolume = l_fltVolume * l_intReplicates;
        }
        else
        {
          Trace("Mask:  ",l_strBarcodeMask);
          if (l_strBarcodeMask == "BASELINE SOLUTION")
          {
            l_fltVolumePerWell = l_fltBase;
            l_fltVolume = l_fltVolumePerWell * 12;
            l_fltVolume = l_fltVolume * 8;
          }
          if (l_strBarcodeMask == "DILUENT")
          {
            l_fltVolumePerWell = l_fltDiluent;
            l_fltVolume = l_fltVolumePerWell * l_intReplicates;
            l_fltVolume = l_fltVolume * l_intTotalVolumes;
            l_fltVolume = l_fltVolume * 8;
          }
        }
        l_fltVolume = l_fltVolume + l_fltDeadVol;
        l_fltVolume = l_fltVolume / (1000.0 * 1.0);
        l_fltVolume = MthRound(l_fltVolume, 2);
        if(0){
          l_intVolume = MthCeiling(l_fltVolume);
          l_strVolume = StrConcat4(l_intVolume, Translate(".0"), Translate(" mL"), Translate(""));
        }
        o_arrVolumesNeeded.AddAsLast(l_fltVolume);
      }
    }
  }

  private function _GetVolumesPerLabID_MPH( device & ML_STAR, variable & i_arrLabID[], variable & o_arrVolumesNeeded[] ) void {
    private variable l_intVolume;
    private variable l_strVolume;
    private variable i;
    private variable l_intIndex;
    private variable l_intTotalVolumes;
    private variable l_fltDiluent;
    private variable l_intReplicates;
    private variable l_fltBase;
    private variable l_fltDeadVol;
    private variable l_fltVolumePerWell;
    private variable l_intDeckID;
    private variable l_strBarcodeMask;
    private variable l_strLabID;
    private variable l_intTotalLabware;
    private variable l_blnMaskFound;
    private variable l_intElementID;
    private variable l_fltVolume;
    private variable l_arrRangeNames[];
    private variable l_arrRangeVolumes[];
    private variable l_intValueFound[];
    o_arrVolumesNeeded.SetSize( 0);
    o_arrVolumesNeeded.SetSize(0);
    l_intDeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("MPHBase"), l_fltBase);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("MPHDiluent"), l_fltDiluent);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("ReservoirMPHDeadVol"), l_fltDeadVol);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Replicates"), l_intReplicates);
    if (DATA_CONTROLLER::BLN::OVERIDE_REPLICATES == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReplicates = DATA_CONTROLLER::INT::REPLICATE_NUMBER;
    }
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Solution"), Translate("s"), l_arrRangeNames, l_intTotalVolumes);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Volume"), Translate("f"), l_arrRangeVolumes, l_intTotalVolumes);
    l_intTotalLabware=i_arrLabID.GetSize();
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
      {
        l_intIndex = l_intIndex + 1;
        l_strLabID=i_arrLabID.GetAt(l_intIndex-1);
        l_fltVolume = 0.0;
        l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, l_strLabID);
        l_strBarcodeMask = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
        l_blnMaskFound = HSLExtensions::Array::ContainsValue(l_arrRangeNames, l_strBarcodeMask);
        if (l_blnMaskFound == ASWGLOBAL::BOOL::TRUE)
        {
          l_intValueFound = HSLExtensions::Array::FindValue(l_arrRangeNames, l_strBarcodeMask);
          i=l_intValueFound.GetAt(1-1);
          l_fltVolumePerWell=l_arrRangeVolumes.GetAt(i-1);
          l_fltVolume = l_fltVolumePerWell * 96;
          l_fltVolume = l_fltVolume * l_intReplicates;
        }
        else
        {
          Trace("Mask:  ",l_strBarcodeMask);
          if (l_strBarcodeMask == "BASELINE SOLUTION")
          {
            l_fltVolumePerWell = l_fltBase;
            l_fltVolume = l_fltVolumePerWell * 384;
          }
          if (l_strBarcodeMask == "DILUENT")
          {
            l_fltVolumePerWell = l_fltDiluent;
            l_fltVolume = l_fltVolumePerWell * l_intReplicates;
            l_fltVolume = l_fltVolume * 96;
          }
        }
        l_fltVolume = l_fltVolume + l_fltDeadVol;
        l_fltVolume = l_fltVolume / (1000.0 * 1.0);
        l_intVolume = MthCeiling(l_fltVolume);
        l_strVolume = StrConcat4(l_intVolume, Translate(".0"), Translate(" mL"), Translate(""));
        o_arrVolumesNeeded.AddAsLast(l_strVolume);
      }
    }
  }
} // library namespace
