#pragma once
//#include "HSL_MethodHelper.hsl"
#include "HSLDevLib.hsl"
#include "Artel\\Resources\\Library\\Data_Controller_GlobalVariables.hsl"
#include "HSLFilLib.hsl"
#include "HSLStrLib.hsl"
#include "VantageLights.hs_"
#include "HSLSeqLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "Artel\\Resources\\Library\\ConfigurationEditor.hs_"
#include "STAR Tools\\STAR MPH96 Tools.hs_"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "ASWStandardDialogs\\AswStatusDialog.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace SYSTEM_CONTROLLER {
  function InitializeController( device & ML_STAR, sequence i_seqChannelWastePosition ) void ;
  function InitializeSystem( device & ML_STAR ) void ;
  function TerminateSystem( device & ML_STAR ) void ;
  private function _GetDefinitionFileValue( variable & i_str_ConfigFilePath, variable i_str_ValueToSearch, variable i_str_DataDefinition, variable i_str_Instance, variable i_int_ReturnValue, variable & o_Value ) variable ;
  private function _GetDoorCloseStatus( device & ML_STAR, variable & o_blnDoorStatus ) void ;
  private function _GetInstrumentTypeViaConfig( device & ML_STAR, variable & o_blnDeckTypeSTARlet, variable & o_blnDeckTypeSTAR, variable & o_blnDeckTypeSTARPlus, variable & o_blnDeckTypeVantage1_3, variable & o_blnDeckTypeVantage2_0, variable & o_intAutoLoadParkTrack ) void ;
  private function _LockDoor( device & ML_STAR ) void ;
  private function _UnlockDoor( device & ML_STAR ) void ;
  private function _UpdateStatus( variable i_strText, variable i_blnIndentText ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VANTAGELIGHTS::_InitLibrary();
    CONFIGURATIONEDITOR::_InitLibrary();
    STAR_MPH96_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    VANTAGELIGHTS::_ExitLibrary();
    CONFIGURATIONEDITOR::_ExitLibrary();
    STAR_MPH96_TOOLS::_ExitLibrary();
  }

  function InitializeSystem( device & ML_STAR ) void {
    private variable l_strLabIDWaste;
    private variable l_fltXPark;
    private variable l_fltZCoord;
    private variable l_fltYCoord;
    private variable l_fltACoord;
    private variable l_blnAutoLoadPresent;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    AswStatusDialog::Initialize(DATA_CONTROLLER::STR::METHOD_NAME);
    _UpdateStatus(Translate("Initialize system..."), ASWGLOBAL::BOOL::FALSE);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    DATA_CONTROLLER::INIT::InitializeVariables(ML_STAR);
    l_blnAutoLoadPresent = DevGetCfgValueWithKey(ML_STAR, 3);
    if (l_blnAutoLoadPresent == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_13 == ASWGLOBAL::BOOL::TRUE)
    {
      VANTAGELIGHTS::LightsOnWhite(ML_STAR, 100);
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_20 == ASWGLOBAL::BOOL::TRUE)
    {
      VANTAGELIGHTS::LightsOnWhite(ML_STAR, 100);
    }
    if (DATA_CONTROLLER::SYSTEM::MPH96 == ASWGLOBAL::BOOL::TRUE)
    {
      STAR_MPH96_TOOLS::MOVE_MPH96ToBack(ML_STAR);
    }
    l_strLabIDWaste = SeqGetLabwareId(DATA_CONTROLLER::SEQ::WASTE_TIP_EJECT);
    DevGetLabwarePosition(ML_STAR, l_strLabIDWaste, l_fltXPark, l_fltYCoord, l_fltZCoord, l_fltACoord);
    if (DATA_CONTROLLER::SYSTEM::CHANNEL == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    }
    else
    {
      if (DATA_CONTROLLER::SYSTEM::CHANNEL_XL == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._55AA8CFA_FB6C_4691_8C8C_8D410E2123FD("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"); // XLMoveToPosition
      }
    }
    _UnlockDoor(ML_STAR);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function InitializeController( device & ML_STAR, sequence i_seqChannelWastePosition ) void {
    private variable l_blnChannelsValid;
    private variable l_blnChannelsXLValid;
    private variable l_blnMPHValid;
    private variable l_blnAutoLoadValid;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("EnableChannels"), l_blnChannelsValid);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("EnableChannelsXL"), l_blnChannelsXLValid);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("EnableMPH"), l_blnMPHValid);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("EnableAutoLoad"), l_blnAutoLoadValid);
    DATA_CONTROLLER::INIT::LockLibrary();
    DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER = DevGetCfgValueWithKey(ML_STAR, 1);
    DATA_CONTROLLER::SYSTEM::CHANNEL_XL_NUMBER = DevGetCfgValueWithKey(ML_STAR, 43);
    DATA_CONTROLLER::SYSTEM::AUTOLOAD = DevGetCfgValueWithKey(ML_STAR, 3);
    DATA_CONTROLLER::SYSTEM::MPH96 = DevGetCfgValueWithKey(ML_STAR, 24);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Channels Valid:  "), l_blnChannelsValid, Translate(""));
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER > 0)
    {
      if (l_blnChannelsValid == ASWGLOBAL::BOOL::TRUE)
      {
        DATA_CONTROLLER::SYSTEM::CHANNEL = ASWGLOBAL::BOOL::TRUE;
      }
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_XL_NUMBER > 0)
    {
      if (l_blnChannelsXLValid == ASWGLOBAL::BOOL::TRUE)
      {
        DATA_CONTROLLER::SYSTEM::CHANNEL_XL = ASWGLOBAL::BOOL::TRUE;
      }
    }
    if (l_blnMPHValid == ASWGLOBAL::BOOL::FALSE)
    {
      DATA_CONTROLLER::SYSTEM::MPH96 = ASWGLOBAL::BOOL::FALSE;
    }
    if (l_blnAutoLoadValid == ASWGLOBAL::BOOL::FALSE)
    {
      DATA_CONTROLLER::SYSTEM::AUTOLOAD = ASWGLOBAL::BOOL::FALSE;
    }
    MECC::TraceComment(Translate("System Configuration::"));
    _GetInstrumentTypeViaConfig(ML_STAR, DATA_CONTROLLER::SYSTEM::IS_STARLET, DATA_CONTROLLER::SYSTEM::IS_STAR, DATA_CONTROLLER::SYSTEM::IS_STARPLUS, DATA_CONTROLLER::SYSTEM::IS_VANTAGE_13, DATA_CONTROLLER::SYSTEM::IS_VANTAGE_20, DATA_CONTROLLER::SYSTEM::AUTOLOAD_PARK);
    if (DATA_CONTROLLER::SYSTEM::AUTOLOAD == ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Autoload park track:  "), DATA_CONTROLLER::SYSTEM::AUTOLOAD_PARK, Translate(""));
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL == ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("1mL Channels:  "), DATA_CONTROLLER::SYSTEM::CHANNEL_NUMBER, Translate(""));
    }
    if (DATA_CONTROLLER::SYSTEM::CHANNEL_XL == ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("5mL Channels:  "), DATA_CONTROLLER::SYSTEM::CHANNEL_XL_NUMBER, Translate(""));
    }
    if (DATA_CONTROLLER::SYSTEM::MPH96 == ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("MPH96"), Translate(""), Translate(""));
    }
    SeqCopySequence(DATA_CONTROLLER::SEQ::WASTE_TIP_EJECT, i_seqChannelWastePosition);
    DATA_CONTROLLER::BLN::SYSTEM_CONTROLLER_INIT = ASWGLOBAL::BOOL::TRUE;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  private function _GetInstrumentTypeViaConfig( device & ML_STAR, variable & o_blnDeckTypeSTARlet, variable & o_blnDeckTypeSTAR, variable & o_blnDeckTypeSTARPlus, variable & o_blnDeckTypeVantage1_3, variable & o_blnDeckTypeVantage2_0, variable & o_intAutoLoadParkTrack ) void {
    private variable l_strDeckLayoutFile;
    private variable l_strStarPlusDeck;
    private variable l_strStarDeck;
    private variable l_strStarletDeck;
    private variable l_strVantageConfig;
    private variable l_strConfigFolderPath;
    private variable l_blnInstrumentTypeVantage;
    private variable l_strConfigVantage;
    private variable l_strDeckFile;
    private variable l_strDeckFilePath;
    private variable l_strDeckSize;
    o_blnDeckTypeSTARlet = 0;
    o_blnDeckTypeSTAR = 0;
    o_blnDeckTypeSTARPlus = 0;
    o_blnDeckTypeVantage1_3 = 0;
    o_blnDeckTypeVantage2_0 = 0;
    o_intAutoLoadParkTrack = 0;
    o_blnDeckTypeSTARlet = ASWGLOBAL::BOOL::FALSE;
    o_blnDeckTypeSTAR = ASWGLOBAL::BOOL::FALSE;
    o_blnDeckTypeSTARPlus = ASWGLOBAL::BOOL::FALSE;
    o_blnDeckTypeVantage1_3 = ASWGLOBAL::BOOL::FALSE;
    o_blnDeckTypeVantage2_0 = ASWGLOBAL::BOOL::FALSE;
    l_strConfigFolderPath = FilGetConfigPath();
    l_strDeckLayoutFile = DevGetDeckLayoutFileName(ML_STAR);
    l_strStarPlusDeck = Translate("ML_FlexStar.dck");
    l_strStarDeck = Translate("ML_STAR2.dck");
    l_strStarletDeck = Translate("ML_Starlet.dck");
    l_strVantageConfig = Translate("VStar.cfg");
    _GetDefinitionFileValue(l_strDeckLayoutFile, Translate("Deck"), Translate("DECKLAY"), Translate("ML_STAR"), 0, l_strDeckFile);
    l_strDeckFilePath = StrConcat4(l_strConfigFolderPath, Translate("\\"), l_strDeckFile, Translate(""));
    l_strConfigVantage = StrConcat4(l_strConfigFolderPath, Translate("\\"), l_strVantageConfig, Translate(""));
    l_blnInstrumentTypeVantage = HSLExtensions::File::Exists(l_strConfigVantage);
    if (l_blnInstrumentTypeVantage == ASWGLOBAL::BOOL::TRUE)
    {
      if(0){
        o_blnDeckTypeVantage1_3 = ASWGLOBAL::BOOL::TRUE;
      }
      _GetDefinitionFileValue(l_strDeckFilePath, Translate("MaxLoadingTrays"), Translate("HxGruCommand"), Translate("default"), 1, o_intAutoLoadParkTrack);
      _GetDefinitionFileValue(l_strConfigVantage, Translate("DeckSize"), Translate("CommandEdit"), Translate("default"), 0, l_strDeckSize);
      if (l_strDeckSize == "2.0")
      {
        o_blnDeckTypeVantage2_0 = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        o_blnDeckTypeVantage1_3 = ASWGLOBAL::BOOL::TRUE;
      }
      o_intAutoLoadParkTrack = o_intAutoLoadParkTrack - 3;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("---- Instrument is a Vantage "), l_strDeckSize, Translate("m"), Translate(""));
    }
    else
    {
      if (l_strDeckFile == l_strStarPlusDeck)
      {
        MECC::TraceComment(Translate("---- Instrument is a STARPlus"));
        o_blnDeckTypeSTARPlus = ASWGLOBAL::BOOL::TRUE;
        o_intAutoLoadParkTrack = 30;
      }
      if (l_strDeckFile == l_strStarDeck)
      {
        MECC::TraceComment(Translate("---- Instrument is a STAR"));
        o_blnDeckTypeSTAR = ASWGLOBAL::BOOL::TRUE;
        o_intAutoLoadParkTrack = 54;
      }
      if (l_strDeckFile == l_strStarletDeck)
      {
        MECC::TraceComment(Translate("---- Instrument is a STARlet"));
        o_blnDeckTypeSTARlet = ASWGLOBAL::BOOL::TRUE;
        o_intAutoLoadParkTrack = 30;
      }
    }
  }

  private function _GetDefinitionFileValue( variable & i_str_ConfigFilePath, variable i_str_ValueToSearch, variable i_str_DataDefinition, variable i_str_Instance, variable i_int_ReturnValue, variable & o_Value ) variable {
    private variable str_DataDefinition;
    private variable strFunctionName;
    private variable str_Instance;
    private variable bool_FileExists;
    private variable bool_ReturnValue;
    private variable str_Extension;
    o_Value = 0;
    o_Value = Translate("");
    bool_ReturnValue = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_FileExists = HSLExtensions::File::Exists(i_str_ConfigFilePath);
    if (bool_FileExists == 0)
    {
      Trace(i_str_ConfigFilePath," - File doesn't exist!");
      return (bool_ReturnValue);
    }
    i_str_ValueToSearch = StrConcat2(i_str_ValueToSearch, Translate(""));
    str_Extension = HSLExtensions::File::GetFileExtension(i_str_ConfigFilePath);
    str_DataDefinition = i_str_DataDefinition;
    str_Instance = i_str_Instance;
    if(0){
      Trace("Data definition:  ",str_DataDefinition);
      Trace("Instance:  ",str_Instance);
      Trace("Value to get:  ",i_str_ValueToSearch);
    }
    if (str_DataDefinition != "")
    {
      {
           object objCfgFile;
           objCfgFile.CreateObject("HXCFGFILLIB.HxCfgFile");
           objCfgFile.LoadFile(i_str_ConfigFilePath);
           onerror goto HandleError;
           if(objCfgFile.ExistDataDef(str_DataDefinition,str_Instance) == 1)
           {
                //o_str_Value = objCfgFile.GetDataDefValueAsString(str_DataDefinition,"default",i_str_ValueToSearch);
                objCfgFile.LookupDataDefValueAsString(str_DataDefinition,str_Instance,i_str_ValueToSearch,o_Value);
           }
           onerror goto 0;
           err.Clear();
           objCfgFile.ReleaseObject();
           HandleError:
           {
             objCfgFile.ReleaseObject();
           }
      }
      o_Value = StrConcat2(o_Value, Translate(""));
      if(0){
        Trace("Value found:  ",o_Value);
      }
      if (o_Value != "")
      {
        bool_ReturnValue = 1;
        if (i_int_ReturnValue == 1)
        {
          if(0){
            o_Value = StrIStr(o_Value);
          }
          o_Value = StrIVal(o_Value);
        }
        if (i_int_ReturnValue == 2)
        {
          o_Value = StrFVal(o_Value);
        }
      }
      else
      {
        bool_ReturnValue = 0;
      }
    }
    else
    {
      if(0){
        Trace("File type:  ",str_Extension," unknown!");
      }
      bool_ReturnValue = 0;
    }
    return (bool_ReturnValue);
  }

  function TerminateSystem( device & ML_STAR ) void {
    private variable l_fltXPark;
    private variable l_fltZCoord;
    private variable l_fltYCoord;
    private variable l_strLabIDWaste;
    private variable l_fltACoord;
    private dialog customDialog_1;
    private variable l_blnDoorClosed;
    private timer l_hdlTimer;
    private variable l_intDialogReturn;
    private variable l_blnAutoLoadPresent;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    _UpdateStatus(Translate("Terminate system..."), ASWGLOBAL::BOOL::FALSE);
    l_blnAutoLoadPresent = DevGetCfgValueWithKey(ML_STAR, 3);
    if (l_blnAutoLoadPresent == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    _GetDoorCloseStatus(ML_STAR, l_blnDoorClosed);
    {
      while (l_blnDoorClosed == ASWGLOBAL::BOOL::FALSE)
      {
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        l_intDialogReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if( 0 == l_hdlTimer.SetTimer(0.5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == l_hdlTimer.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _GetDoorCloseStatus(ML_STAR, l_blnDoorClosed);
      }
    }
    _LockDoor(ML_STAR);
    if (DATA_CONTROLLER::SYSTEM::MPH96 == ASWGLOBAL::BOOL::TRUE)
    {
      STAR_MPH96_TOOLS::MOVE_MPH96ToBack(ML_STAR);
    }
    l_strLabIDWaste = SeqGetLabwareId(DATA_CONTROLLER::SEQ::WASTE_TIP_EJECT);
    DevGetLabwarePosition(ML_STAR, l_strLabIDWaste, l_fltXPark, l_fltYCoord, l_fltZCoord, l_fltACoord);
    if (DATA_CONTROLLER::SYSTEM::CHANNEL == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    }
    else
    {
      if (DATA_CONTROLLER::SYSTEM::CHANNEL_XL == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._55AA8CFA_FB6C_4691_8C8C_8D410E2123FD("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"); // XLMoveToPosition
      }
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_13 == ASWGLOBAL::BOOL::TRUE)
    {
      VANTAGELIGHTS::LightsOff(ML_STAR);
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_20 == ASWGLOBAL::BOOL::TRUE)
    {
      VANTAGELIGHTS::LightsOff(ML_STAR);
    }
    AswStatusDialog::Terminate();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  private function _LockDoor( device & ML_STAR ) void {
    MECC::TraceComment(Translate("Lock Doors"));
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    if(0){
      if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Re-Enable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Re-Enable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Re-Enable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
  }

  private function _GetDoorCloseStatus( device & ML_STAR, variable & o_blnDoorStatus ) void {
    private variable _strCoverIsLocked;
    private variable _boolCoverIsLocked;
    private variable _strFwRet;
    o_blnDoorStatus = 0;
    o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
    if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	_strFwRet = arrRetValues[3];
      }
      _strCoverIsLocked = StrRight(_strFwRet, 1);
      _boolCoverIsLocked = StrIVal(_strCoverIsLocked);
      if (_boolCoverIsLocked == 1)
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	_strFwRet = arrRetValues[3];
      }
      _strCoverIsLocked = StrRight(_strFwRet, 1);
      _boolCoverIsLocked = StrIVal(_strCoverIsLocked);
      if (_boolCoverIsLocked == 1)
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	_strFwRet = arrRetValues[3];
      }
      _strCoverIsLocked = StrRight(_strFwRet, 1);
      _boolCoverIsLocked = StrIVal(_strCoverIsLocked);
      if (_boolCoverIsLocked == 1)
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_13 == ASWGLOBAL::BOOL::TRUE)
    {
      o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_20 == ASWGLOBAL::BOOL::TRUE)
    {
      o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
    }
  }

  private function _UnlockDoor( device & ML_STAR ) void {
    if(0){
      if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Disable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Disable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Disable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    MECC::TraceComment(Translate("Unlock Doors"));
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  }

  private function _UpdateStatus( variable i_strText, variable i_blnIndentText ) void {
    if (i_blnIndentText == ASWGLOBAL::BOOL::TRUE)
    {
      i_strText = StrConcat2(Translate("\t"), i_strText);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("~~~~~~~~~~~~~~~~~~~~~~~~~~~~~ i_strText = "), i_strText);
    AswStatusDialog::AppendText(i_strText);
  }
} // library namespace
