#pragma once
#include "HSLSeqLib.hsl"
#include "HSLExtensions\\Array.hsl"
#include "HSLExtensions\\Sequence.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace NTRSEQUENCESORTER {
  function Sorting( sequence & io_seqPipetting, variable & io_arrVolumes[] ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Sorting( sequence & io_seqPipetting, variable & io_arrVolumes[] ) void {
    private variable _VolumesArraySize;
    private variable _PipettingSequenceSize;
    private variable _intVolume;
    private variable _loopCounter1;
    private variable _strPositionID;
    private variable _strLabwareID;
    private sequence _seqPipetting300ul;
    private sequence _seqPipetting50ul;
    private sequence _seqPipetting10ul;
    private variable _arrVolumes300ul[];
    private variable _arrVolumes50ul[];
    private variable _arrVolumes10ul[];
    private sequence _seqPipettingTemp;
    _VolumesArraySize=io_arrVolumes.GetSize();
    _PipettingSequenceSize = SeqGetTotal(io_seqPipetting);
    if (_PipettingSequenceSize != _VolumesArraySize)
    {
      MECC::TraceComment(Translate("*****************************************************************************************************************************\n                                                                          Error\nThe total index of the provided array does not match the number of positions in the provided sequence.\nThe method will error, please seek expert advice\n                                                                          Error\n*****************************************************************************************************************************"));
      abort;
    }
    else
    {
      Util2::Debug::TraceSequenceAndData_1(Translate("********** Unsorted Sequence and Array **********"), io_seqPipetting, io_arrVolumes);
    }
    _arrVolumes10ul.SetSize(0);
    _arrVolumes50ul.SetSize(0);
    _arrVolumes300ul.SetSize(0);
    SeqRemoveAll(_seqPipetting10ul);
    SeqRemoveAll(_seqPipetting50ul);
    SeqRemoveAll(_seqPipetting300ul);
    {
      for(_loopCounter1 = 0; _loopCounter1 < _VolumesArraySize;)
      {
        _loopCounter1 = _loopCounter1 + 1;
        _intVolume=io_arrVolumes.GetAt(_loopCounter1-1);
        io_seqPipetting.SetCurrentPosition(_loopCounter1);
        _strLabwareID = SeqGetLabwareId(io_seqPipetting);
        _strPositionID = SeqGetPositionId(io_seqPipetting);
        if (_intVolume <= 10)
        {
          _arrVolumes10ul.AddAsLast(_intVolume);
          SeqAdd(_seqPipetting10ul, _strLabwareID, _strPositionID);
        }
        else
        {
          if (_intVolume <= 50)
          {
            _arrVolumes50ul.AddAsLast(_intVolume);
            SeqAdd(_seqPipetting50ul, _strLabwareID, _strPositionID);
          }
          else
          {
            if (_intVolume <= 300)
            {
              _arrVolumes300ul.AddAsLast(_intVolume);
              SeqAdd(_seqPipetting300ul, _strLabwareID, _strPositionID);
            }
          }
        }
      }
    }
    MECC::TraceComment(Translate("***** Sequence *****"));
    SeqRemoveAll(io_seqPipetting);
    _seqPipettingTemp = HSLExtensions::Sequence::Concat(_seqPipetting10ul, _seqPipetting50ul, 0);
    io_seqPipetting = HSLExtensions::Sequence::Concat(_seqPipettingTemp, _seqPipetting300ul, 0);
    MECC::TraceComment(Translate("***** Array *****"));
    io_arrVolumes.SetSize(0);
    HSLExtensions::Array::Append(io_arrVolumes, _arrVolumes10ul);
    HSLExtensions::Array::Append(io_arrVolumes, _arrVolumes50ul);
    HSLExtensions::Array::Append(io_arrVolumes, _arrVolumes300ul);
    Util2::Debug::TraceSequenceAndData_1(Translate("********** Sorted Sequence and Array **********"), io_seqPipetting, io_arrVolumes);
  }
} // library namespace
