#pragma once
#include "HSLFilLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLDeckVisualize.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLUtilLib2.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TIPMANAGEMENT_SANGER {
  function A_VersionInfo(  ) void ;
  function Channels_ModifyTipNumbers( device & ML_STAR, sequence & io_seqTip, variable i_strTipCounter, variable i_intTipNumber, variable i_varDialogTimeout, variable i_strTipDescription ) void ;
  function _GetDBFilePath( variable & o_strTipDBPath ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function A_VersionInfo(  ) void {
  }

  function _GetDBFilePath( variable & o_strTipDBPath ) void {
    private variable _strTipDBPath;
    private variable _strSysPath;
    o_strTipDBPath = 0;
    _strSysPath = FilGetSystemPath();
    o_strTipDBPath = StrConcat2(_strSysPath, Translate("\\CustomizedTipManagement.mdb"));
  }

  function Channels_ModifyTipNumbers( device & ML_STAR, sequence & io_seqTip, variable i_strTipCounter, variable i_intTipNumber, variable i_varDialogTimeout, variable i_strTipDescription ) void {
    private variable _blnSimMode;
    private sequence _seqTipComplete;
    private dialog dialogHandle_1;
    private dialog dialogHandle_2;
    private variable filter_text;
    private variable tips_needed;
    private variable tip_size;
    private dialog dialogHandle_3;
    private variable _strTipCounter;
    private variable _strTipDBPath;
    private variable _intCurrentPosition;
    private variable _intEndPosition;
    private variable _loopCounter1;
    private variable _hndTipManagement_CurrentPosition;
    private variable _sqlCommand;
    private variable _hndTipManagement_EndPosition;
    private variable _hndTipManagement_TipCounter;
    private file _hndTipManagement;
    _blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (_blnSimMode == ASWGLOBAL::BOOL::TRUE)
    {
      i_strTipCounter = StrConcat2(i_strTipCounter, Translate("_sim"));
    }
    _GetDBFilePath(_strTipDBPath);
    _sqlCommand = StrConcat4(Translate("SELECT * FROM [TipCounters] WHERE [TipCounter] = '"), i_strTipCounter, Translate("'"), Translate(""));
    {
      _loopCounter1 = 0;
      while (1 == 1)
      {
        _loopCounter1 = _loopCounter1 + 1;
        if (_loopCounter1 == 5)
        {
          break;
        }
        onerror goto errLabel_4 ;
        err.Clear();
        _hndTipManagement.AddField("TipCounter", i_strTipCounter, hslString, 255);
        _hndTipManagement.AddField("CurrentPosition", _intCurrentPosition, hslInteger);
        _hndTipManagement.AddField("EndPosition", _intEndPosition, hslInteger);
        if( 0 == _hndTipManagement.Open(_strTipDBPath + " " + "TipCounters", hslAppend, _sqlCommand) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strTipDBPath, "HxMetEdCompCmd");
        }
        if( 0 == _hndTipManagement.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != _hndTipManagement.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _hndTipManagement.RemoveFields();
        break;
        errLabel_4 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          if( 0 != _hndTipManagement.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          _hndTipManagement.RemoveFields();
          _intCurrentPosition = io_seqTip.GetCurrentPosition();
          _intEndPosition = io_seqTip.GetCount();
          _hndTipManagement.AddField("TipCounter", i_strTipCounter, hslString, 255);
          _hndTipManagement.AddField("CurrentPosition", _intCurrentPosition, hslInteger);
          _hndTipManagement.AddField("EndPosition", _intEndPosition, hslInteger);
          if( 0 == _hndTipManagement.Open(_strTipDBPath + " " + "TipCounters", hslAppend) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strTipDBPath, "HxMetEdCompCmd");
          }
          if( 0 == _hndTipManagement.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != _hndTipManagement.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          _hndTipManagement.RemoveFields();
        }   /* end if from skip handler if no error */
      }
    }
    SeqCopySequence(_seqTipComplete, io_seqTip);
    DeckVisualize::UpdateUsedPositions(ML_STAR, _seqTipComplete, 6, Translate(""));
    dialogHandle_3.SetOutput(Translate("Please load at least "), i_intTipNumber, Translate(" "), i_strTipDescription, Translate("tips at the flashing position and edit the tip counter."), Translate(""), Translate(""));
    dialogHandle_3.ShowOutput(Translate("Load Instruction"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
} // library namespace
