#pragma once
#include "DataManager\\DataManagerInterface.hs_"
#include "HSLTrcLib.hsl"
#include "HSLFilLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTimLib.hsl"
#include "DataManager\\DataManagerBase.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLFileDirectoryLib.hsl"
#include "RemoveTextDelimitersFromAsciiTextFile.hsl"
#include "HSLSeqLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "EmailUtilities\\HSLEmailUtilLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace TRUEDATATRACKING {
  function BarcodeAcquisitionCORE( device & i_ML_STAR, variable i_blnSimulationMode, variable i_intNumberOfSourcePlates, variable i_intNumberOfDestinationPlates, sequence & io_trp_Source_BCScanning, sequence & io_trp_Dest_BCScanning, sequence & i_GripperToolParameters, variable & o_arrSourceBarcodes[], variable & o_arrDestBarcodes[], variable i_intSourceGripHeight, variable i_intSourceGripWidth, variable i_intSourceGripOpenWidth, variable i_intDestGripHeight, variable i_intDestGripWidth, variable i_intDestGripOpenWidth ) void ;
  function BarcodeAcquisitionISWAP( device & i_ML_STAR, variable i_blnSimulationMode, variable i_intNumberOfSourcePlates, variable i_intNumberOfDestinationPlates, sequence & io_trp_Source_BCScanning, sequence & io_trp_Dest_BCScanning, variable & o_arrSourceBarcodes[], variable & o_arrDestBarcodes[], variable i_intSourceGripHeight, variable i_intSourceGripWidth, variable i_intSourceGripOpenWidth, variable i_intDestGripHeight, variable i_intDestGripWidth, variable i_intDestGripOpenWidth ) void ;
  function DataTrackingPreparation( variable & io_strDatabaseTableName, variable & io_arrDatabaseColumnNames[], variable o_blnPipettingStarted ) void ;
  function MappingFileGeneration( device & i_ML_STAR, sequence & i_seqSourcePipetting, sequence & i_seqDestPipetting, variable i_intSourceSize, variable i_intDestSize, variable & io_strDatabaseTableName, variable & io_arrDatabaseColumnNames[] ) void ;
  function WriteToOutputFile( variable i_intNumberOfDestinationPlates, variable & i_arrSourceBarcodes[], variable & i_arrDestBarcodes[], variable & io_strDatabaseTableName ) void ;
  function WriteToOutputFileOnAbort( variable i_intNumberOfDestinationPlates, variable & i_arrSourceBarcodes[], variable & i_arrDestBarcodes[], variable & io_strDatabaseTableName, variable i_blnPipettingStarted ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    DATAMANAGERINTERFACE::_InitLibrary();
  }
  function _ExitLibrary() {
    DATAMANAGERINTERFACE::_ExitLibrary();
  }

  function MappingFileGeneration( device & i_ML_STAR, sequence & i_seqSourcePipetting, sequence & i_seqDestPipetting, variable i_intSourceSize, variable i_intDestSize, variable & io_strDatabaseTableName, variable & io_arrDatabaseColumnNames[] ) void {
    private variable _strMappingFileName;
    private variable _strLogFilePath;
    private variable _hndMappingFile_SPositionId;
    private variable _hndMappingFile_TVolume;
    private variable _hndMappingFile_ActionDateTime;
    private variable _strMappingFilePath;
    private variable _hndMappingFile_TPositionId;
    private variable _hndMappingFile_SRackBC;
    private variable _hndMappingFile_TRackBC;
    private file _hndMappingFile;
    private variable _arrMappingFileRowData[];
    private variable _hndMappingFile_DestUniqueIdentifier;
    private variable _intNumberOfDatabaseRows;
    private variable _loopCounter2;
    MECC::TraceComment(Translate("###########################################\n            MAPPING FILE GENERATION: START\n###########################################"));
    MECC::TraceComment(Translate("****************** Identify Mapping File Location ******************"));
    _strMappingFileName = Translate("SampleTransfer384to384.xls");
    TrcTrace(Translate("_strMappingFileName = "), _strMappingFileName);
    _strLogFilePath = FilGetLogFilesPath();
    TrcTrace(Translate("_strLogFilePath = "), _strLogFilePath);
    MECC::TraceComment(Translate("****************** Generate Mapping File ******************"));
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(i_ML_STAR, i_seqSourcePipetting);
    {
      variable _FilterIdsArray_1[];
      variable _ColumnIdsArray_1[];
      variable _ColumnNamesArray_1[];
      variable _ExperimentsArray_1[];
      _FilterIdsArray_1.SetSize(0);
      _ColumnNamesArray_1.SetSize(14);
      _ColumnIdsArray_1.SetSize(14);
      _ColumnNamesArray_1.SetAt(0, "RecordId");
      _ColumnIdsArray_1.SetAt(0, 0);
      _ColumnNamesArray_1.SetAt(1, "TRackBC");
      _ColumnIdsArray_1.SetAt(1, 1);
      _ColumnNamesArray_1.SetAt(2, "TLabwareId");
      _ColumnIdsArray_1.SetAt(2, 2);
      _ColumnNamesArray_1.SetAt(3, "TPositionId");
      _ColumnIdsArray_1.SetAt(3, 3);
      _ColumnNamesArray_1.SetAt(4, "TPositionBC");
      _ColumnIdsArray_1.SetAt(4, 4);
      _ColumnNamesArray_1.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_1.SetAt(5, 5);
      _ColumnNamesArray_1.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_1.SetAt(6, 6);
      _ColumnNamesArray_1.SetAt(7, "TVolume");
      _ColumnIdsArray_1.SetAt(7, 7);
      _ColumnNamesArray_1.SetAt(8, "SRackBC");
      _ColumnIdsArray_1.SetAt(8, 8);
      _ColumnNamesArray_1.SetAt(9, "SLabwareId");
      _ColumnIdsArray_1.SetAt(9, 9);
      _ColumnNamesArray_1.SetAt(10, "SPositionId");
      _ColumnIdsArray_1.SetAt(10, 10);
      _ColumnNamesArray_1.SetAt(11, "SPositionBC");
      _ColumnIdsArray_1.SetAt(11, 11);
      _ColumnNamesArray_1.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_1.SetAt(12, 12);
      _ColumnNamesArray_1.SetAt(13, "UserName");
      _ColumnIdsArray_1.SetAt(13, 13);
      _ExperimentsArray_1.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(i_ML_STAR, i_seqDestPipetting, 1, _FilterIdsArray_1, 0, _ColumnIdsArray_1, _ColumnNamesArray_1, _ExperimentsArray_1, _strMappingFileName, 1, 0, _strLogFilePath, 1);
    }
    _strMappingFilePath = StrConcat4(_strLogFilePath, Translate("\\"), _strMappingFileName, Translate(""));
    TrcTrace(Translate("_strMappingFileName = "), _strMappingFileName);
    MECC::TraceComment(Translate("****************** Add Data from the Mapping File into the Hamilton Database ******************"));
    _hndMappingFile.AddField("TRackBC", _hndMappingFile_TRackBC, hslString, 255);
    _hndMappingFile.AddField("TPositionId", _hndMappingFile_TPositionId, hslString, 255);
    _hndMappingFile.AddField("TVolume", _hndMappingFile_TVolume, hslFloat);
    _hndMappingFile.AddField("SRackBC", _hndMappingFile_SRackBC, hslString, 255);
    _hndMappingFile.AddField("SPositionId", _hndMappingFile_SPositionId, hslString, 255);
    _hndMappingFile.AddField("ActionDateTime", _hndMappingFile_ActionDateTime, hslString, 255);
    if( 0 == _hndMappingFile.Open(_strMappingFilePath + " " + "ReportMapping$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strMappingFilePath, "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("Declare the Array to hold Mapping File Data. This is created fresh each loop\n\nDestination Container\nDestination Position\nDestination Size\nSource Container\nSource Position\nSource Size\nVolume\nTime\nUnique ID"));
    {
      _loopCounter2 = 0;
      while (
         (_hndMappingFile.Eof() == 0)
      )
      {
        _loopCounter2 = _loopCounter2 + 1;
        if( 0 == _hndMappingFile.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _arrMappingFileRowData.SetSize(0);
        _arrMappingFileRowData.AddAsLast(_hndMappingFile_TRackBC);
        _arrMappingFileRowData.AddAsLast(_hndMappingFile_TPositionId);
        _arrMappingFileRowData.AddAsLast(i_intDestSize);
        _arrMappingFileRowData.AddAsLast(_hndMappingFile_SRackBC);
        _arrMappingFileRowData.AddAsLast(_hndMappingFile_SPositionId);
        _arrMappingFileRowData.AddAsLast(i_intSourceSize);
        _arrMappingFileRowData.AddAsLast(_hndMappingFile_TVolume);
        _arrMappingFileRowData.AddAsLast(_hndMappingFile_ActionDateTime);
        _hndMappingFile_DestUniqueIdentifier = StrConcat4(_hndMappingFile_TRackBC, Translate("&"), _hndMappingFile_TPositionId, Translate(""));
        _arrMappingFileRowData.AddAsLast(_hndMappingFile_DestUniqueIdentifier);
        Util2::Debug::TraceArray(Translate("_arrMappingFileRowData = "), _arrMappingFileRowData);
        DATAMANAGERINTERFACE::InsertRow(io_strDatabaseTableName, io_arrDatabaseColumnNames, _arrMappingFileRowData);
      }
    }
    if( 0 != _hndMappingFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndMappingFile.RemoveFields();
    DATAMANAGERINTERFACE::GetRowCount(io_strDatabaseTableName, _intNumberOfDatabaseRows);
    TrcTrace(Translate("_intNumberOfDatabaseRows = "), _intNumberOfDatabaseRows);
    MECC::TraceComment(Translate("###########################################\n            MAPPING FILE GENERATION: END\n###########################################"));
  }

  function DataTrackingPreparation( variable & io_strDatabaseTableName, variable & io_arrDatabaseColumnNames[], variable o_blnPipettingStarted ) void {
    private variable _arrDatabaseColumnTypes[];
    private variable _arrDatabaseColumnNull[];
    private variable _blnSuccess;
    MECC::TraceComment(Translate("###########################################\n          DATA TRACKING PREPARATION: START\n###########################################"));
    MECC::TraceComment(Translate("******************** Preparing the Hamilton Vector/SQL Database ********************"));
    io_strDatabaseTableName = Translate("SampleTransfer384to384");
    io_arrDatabaseColumnNames.SetSize(0);
    _arrDatabaseColumnTypes.SetSize(0);
    _arrDatabaseColumnNull.SetSize(0);
    io_arrDatabaseColumnNames.AddAsLast(Translate("Destination Container"));
    _arrDatabaseColumnTypes.AddAsLast(DATAMANAGERINTERFACEBASE::VALUETYPE::String);
    _arrDatabaseColumnNull.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    io_arrDatabaseColumnNames.AddAsLast(Translate("Destination Position"));
    _arrDatabaseColumnTypes.AddAsLast(DATAMANAGERINTERFACEBASE::VALUETYPE::String);
    _arrDatabaseColumnNull.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    io_arrDatabaseColumnNames.AddAsLast(Translate("Destination Size"));
    _arrDatabaseColumnTypes.AddAsLast(DATAMANAGERINTERFACEBASE::VALUETYPE::String);
    _arrDatabaseColumnNull.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    io_arrDatabaseColumnNames.AddAsLast(Translate("Source Container"));
    _arrDatabaseColumnTypes.AddAsLast(DATAMANAGERINTERFACEBASE::VALUETYPE::String);
    _arrDatabaseColumnNull.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    io_arrDatabaseColumnNames.AddAsLast(Translate("Source Position"));
    _arrDatabaseColumnTypes.AddAsLast(DATAMANAGERINTERFACEBASE::VALUETYPE::String);
    _arrDatabaseColumnNull.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    io_arrDatabaseColumnNames.AddAsLast(Translate("Source Size"));
    _arrDatabaseColumnTypes.AddAsLast(DATAMANAGERINTERFACEBASE::VALUETYPE::String);
    _arrDatabaseColumnNull.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    io_arrDatabaseColumnNames.AddAsLast(Translate("Volume"));
    _arrDatabaseColumnTypes.AddAsLast(DATAMANAGERINTERFACEBASE::VALUETYPE::Double);
    _arrDatabaseColumnNull.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    io_arrDatabaseColumnNames.AddAsLast(Translate("Time"));
    _arrDatabaseColumnTypes.AddAsLast(DATAMANAGERINTERFACEBASE::VALUETYPE::String);
    _arrDatabaseColumnNull.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    io_arrDatabaseColumnNames.AddAsLast(Translate("DestUniqueIdentifier"));
    _arrDatabaseColumnTypes.AddAsLast(DATAMANAGERINTERFACEBASE::VALUETYPE::String);
    _arrDatabaseColumnNull.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    DATAMANAGERINTERFACE::Init();
    _blnSuccess = DATAMANAGERINTERFACE::AddTable(io_strDatabaseTableName, io_arrDatabaseColumnNames, _arrDatabaseColumnTypes, _arrDatabaseColumnNull);
    TrcTrace(Translate("Table Generation _blnSucess = "), _blnSuccess);
    MECC::TraceComment(Translate("###########################################\n          DATA TRACKING PREPARATION: END\n###########################################"));
  }

  function WriteToOutputFile( variable i_intNumberOfDestinationPlates, variable & i_arrSourceBarcodes[], variable & i_arrDestBarcodes[], variable & io_strDatabaseTableName ) void {
    private variable strTime;
    private variable strDate;
    private variable _strDestBarcode;
    private variable _strDatabaseSearchString;
    private variable _loopCounter1;
    private variable _intDatabaseRowsAffected;
    private variable _strOutputFilePath;
    private variable _blnSuccess;
    private variable _strFilePathSchema;
    private variable _blnSchema;
    private variable _loopCounter2;
    private variable _intNumberOfFiles;
    private variable _arrStrFilePaths[];
    private variable _blnPuma;
    MECC::TraceComment(Translate("###########################################\n                            OUTPUT FILE: START\n###########################################"));
    MECC::TraceComment(Translate("****************** Get End Time ******************"));
    strTime = TimGetFormattedTime(Translate("%H-%M-%S"));
    strDate = TimGetFormattedDate(Translate("%Y-%m-%d"));
    MECC::TraceComment(Translate("****************** Create Output File For Each Destination Plate ******************"));
    Util2::Debug::TraceArray_2(Translate("Source & Destination Barcode Arrays"), i_arrSourceBarcodes, i_arrDestBarcodes);
    _arrStrFilePaths.SetSize(0);
    {
      for(_loopCounter1 = 0; _loopCounter1 < i_intNumberOfDestinationPlates;)
      {
        _loopCounter1 = _loopCounter1 + 1;
        MECC::TraceComment(Translate("********** Get Destination Plate Barcode **********"));
        _strDestBarcode=i_arrDestBarcodes.GetAt(_loopCounter1-1);
        TrcTrace(Translate("_strDestBarcode = "), _strDestBarcode);
        MECC::TraceComment(Translate("********** Isolate Rows Associated with Destination Barcode **********"));
        _strDatabaseSearchString = StrConcat4(Translate("[Destination Container] = "), Translate("'"), _strDestBarcode, Translate("'"));
        TrcTrace(Translate("_strDatabaseSearchString = "), _strDatabaseSearchString);
        DATAMANAGERINTERFACEBASE::ExecuteSelectCommand(io_strDatabaseTableName, DATAMANAGERINTERFACEBASE::SELECTIONMODE::All, Translate("Destination Container, Destination Position, Destination Size, Source Container, Source Position, Source Size, Volume, Time"), _strDatabaseSearchString, Translate(""), _intDatabaseRowsAffected);
        TrcTrace(Translate("_intDatabaseRowsAffected = "), _intDatabaseRowsAffected);
        _strOutputFilePath = StrConcat8(Translate("C:\\DataCapture\\upload\\"), _strDestBarcode, Translate(" - "), strDate, Translate(" "), strTime, Translate(".csv"), Translate(""));
        TrcTrace(Translate("_strOutputFilePath = "), _strOutputFilePath);
        _arrStrFilePaths.AddAsLast(_strOutputFilePath);
        MECC::TraceComment(Translate("********** Export Rows to .csv **********"));
        _blnSuccess = DATAMANAGERINTERFACEBASE::ExportSelectedToCSVFile(_strOutputFilePath, ASWGLOBAL::BOOL::TRUE, Translate(","), DATAMANAGERINTERFACEBASE::BOOLEANEXPORTFORMAT::ZeroAndOne, ASWGLOBAL::BOOL::TRUE);
        TrcTrace(Translate("_blnSuccess = "), _blnSuccess);
      }
    }
    MECC::TraceComment(Translate("****************** Delete Schema.ini File ******************"));
    _strFilePathSchema = Translate("C:\\DataCapture\\upload\\schema.ini");
    _blnSchema = FileDirectoryLib::CheckIfFileExists(_strFilePathSchema);
    if (_blnSchema == 1)
    {
      FileDirectoryLib::DeleteFile(_strFilePathSchema);
    }
    else
    {
    }
    if(0){
      MECC::TraceComment(Translate("****************** Remove Special Characters ******************"));
      _intNumberOfFiles=_arrStrFilePaths.GetSize();
      {
        for(_loopCounter2 = 0; _loopCounter2 < _intNumberOfFiles;)
        {
          _loopCounter2 = _loopCounter2 + 1;
          _strOutputFilePath=_arrStrFilePaths.GetAt(_loopCounter2-1);
          RemoveTextDelimitersFromAsciiTextFile(_strOutputFilePath);
        }
      }
    }
    MECC::TraceComment(Translate("****************** Trigger DataCapture, Close & Terminate Connection to Hamilton Database ******************"));
    {
      event localDummyEvent1;
      if( 0 == Shell("C:\\DataCapture\\DataCaptureStart.bat", hslShow, hslSynchronous, localDummyEvent1, _blnPuma) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    TrcTrace(Translate("_blnPuma = "), _blnPuma);
    DATAMANAGERINTERFACE::RemoveTable(io_strDatabaseTableName);
    DATAMANAGERINTERFACE::Terminate();
    MECC::TraceComment(Translate("###########################################\n                               OUTPUT FILE: END\n###########################################"));
  }

  function WriteToOutputFileOnAbort( variable i_intNumberOfDestinationPlates, variable & i_arrSourceBarcodes[], variable & i_arrDestBarcodes[], variable & io_strDatabaseTableName, variable i_blnPipettingStarted ) void {
    private variable _strDestBarcode;
    private variable _strFilePathSchema;
    private variable _blnSchema;
    private variable _strDatabaseSearchString;
    private variable strTime;
    private variable strDate;
    private variable _loopCounter1;
    private variable _intDatabaseRowsAffected;
    private variable _blnPuma;
    private variable _loopCounter2;
    private variable _strOutputFilePath;
    private variable _blnSuccess;
    private variable _intNumberOfFiles;
    private variable _arrStrFilePaths[];
    if (i_blnPipettingStarted == 1)
    {
      MECC::TraceComment(Translate("###########################################\n                            OUTPUT FILE: START\n###########################################"));
      MECC::TraceComment(Translate("****************** Get End Time ******************"));
      strTime = TimGetFormattedTime(Translate("%H-%M-%S"));
      strDate = TimGetFormattedDate(Translate("%Y-%m-%d"));
      MECC::TraceComment(Translate("****************** Create Output File For Each Destination Plate ******************"));
      Util2::Debug::TraceArray_2(Translate("Source & Destination Barcode Arrays"), i_arrSourceBarcodes, i_arrDestBarcodes);
      _arrStrFilePaths.SetSize(0);
      {
        for(_loopCounter1 = 0; _loopCounter1 < i_intNumberOfDestinationPlates;)
        {
          _loopCounter1 = _loopCounter1 + 1;
          MECC::TraceComment(Translate("********** Get Destination Plate Barcode **********"));
          _strDestBarcode=i_arrDestBarcodes.GetAt(_loopCounter1-1);
          TrcTrace(Translate("_strDestBarcode = "), _strDestBarcode);
          MECC::TraceComment(Translate("********** Isolate Rows Associated with Destination Barcode **********"));
          _strDatabaseSearchString = StrConcat4(Translate("[Destination Container] = "), Translate("'"), _strDestBarcode, Translate("'"));
          TrcTrace(Translate("_strDatabaseSearchString = "), _strDatabaseSearchString);
          DATAMANAGERINTERFACEBASE::ExecuteSelectCommand(io_strDatabaseTableName, DATAMANAGERINTERFACEBASE::SELECTIONMODE::All, Translate("Destination Container, Destination Position, Destination Size, Source Container, Source Position, Source Size, Volume, Time"), _strDatabaseSearchString, Translate(""), _intDatabaseRowsAffected);
          TrcTrace(Translate("_intDatabaseRowsAffected = "), _intDatabaseRowsAffected);
          _strOutputFilePath = StrConcat8(Translate("C:\\DataCapture\\upload\\"), _strDestBarcode, Translate(" - "), strDate, Translate(" "), strTime, Translate(".csv"), Translate(""));
          TrcTrace(Translate("_strOutputFilePath = "), _strOutputFilePath);
          _arrStrFilePaths.AddAsLast(_strOutputFilePath);
          MECC::TraceComment(Translate("********** Export Rows to .csv **********"));
          _blnSuccess = DATAMANAGERINTERFACEBASE::ExportSelectedToCSVFile(_strOutputFilePath, ASWGLOBAL::BOOL::TRUE, Translate(","), DATAMANAGERINTERFACEBASE::BOOLEANEXPORTFORMAT::ZeroAndOne, ASWGLOBAL::BOOL::TRUE);
          TrcTrace(Translate("_blnSuccess = "), _blnSuccess);
        }
      }
      MECC::TraceComment(Translate("****************** Delete Schema.ini File ******************"));
      _strFilePathSchema = Translate("C:\\DataCapture\\upload\\schema.ini");
      _blnSchema = FileDirectoryLib::CheckIfFileExists(_strFilePathSchema);
      if (_blnSchema == 1)
      {
        FileDirectoryLib::DeleteFile(_strFilePathSchema);
      }
      else
      {
      }
      if(0){
        MECC::TraceComment(Translate("****************** Remove Special Characters ******************"));
        _intNumberOfFiles=_arrStrFilePaths.GetSize();
        {
          for(_loopCounter2 = 0; _loopCounter2 < _intNumberOfFiles;)
          {
            _loopCounter2 = _loopCounter2 + 1;
            _strOutputFilePath=_arrStrFilePaths.GetAt(_loopCounter2-1);
            RemoveTextDelimitersFromAsciiTextFile(_strOutputFilePath);
          }
        }
      }
      MECC::TraceComment(Translate("****************** Trigger DataCapture, Close & Terminate Connection to Hamilton Database ******************"));
      {
        event localDummyEvent1;
        if( 0 == Shell("C:\\DataCapture\\DataCaptureStart.bat", hslShow, hslSynchronous, localDummyEvent1, _blnPuma) )
        {
              MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      TrcTrace(Translate("_blnPuma = "), _blnPuma);
      DATAMANAGERINTERFACE::RemoveTable(io_strDatabaseTableName);
      DATAMANAGERINTERFACE::Terminate();
      MECC::TraceComment(Translate("###########################################\n                               OUTPUT FILE: END\n###########################################"));
    }
  }

  function BarcodeAcquisitionCORE( device & i_ML_STAR, variable i_blnSimulationMode, variable i_intNumberOfSourcePlates, variable i_intNumberOfDestinationPlates, sequence & io_trp_Source_BCScanning, sequence & io_trp_Dest_BCScanning, sequence & i_GripperToolParameters, variable & o_arrSourceBarcodes[], variable & o_arrDestBarcodes[], variable i_intSourceGripHeight, variable i_intSourceGripWidth, variable i_intSourceGripOpenWidth, variable i_intDestGripHeight, variable i_intDestGripWidth, variable i_intDestGripOpenWidth ) void {
    private variable _intDestBarcodeArraySize;
    private variable _strDestBarcode;
    private variable _intDestPlateCounter;
    private variable _loopCounter1;
    private variable _loopCounter2;
    private variable _intSourceBarcodeArraySize;
    private variable _strSourceBarcode;
    private variable _intSourcePlateCounter;
    private variable _blnPark;
    MECC::TraceComment(Translate("###########################################\n                BARCODE ACQUISITON: START\n###########################################"));
    MECC::TraceComment(Translate("******************** Plate Counters and Arrays for Barcode Acquisiton ********************"));
    _intSourcePlateCounter = 1;
    _intDestPlateCounter = 1;
    o_arrSourceBarcodes.SetSize(0);
    o_arrDestBarcodes.SetSize(0);
    MECC::TraceComment(Translate("******************** Source Barcode ********************"));
    _blnPark = 0;
    {
      for(_loopCounter1 = 0; _loopCounter1 < i_intNumberOfSourcePlates;)
      {
        _loopCounter1 = _loopCounter1 + 1;
        i_ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        {
          	variable arrRetValues[];
          	arrRetValues = i_ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
          	_strSourceBarcode = arrRetValues[3];
        }
        i_ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (i_blnSimulationMode == 1)
        {
          _strSourceBarcode = StrConcat2(Translate("SourceBarcode"), _intSourcePlateCounter);
          _intSourcePlateCounter = _intSourcePlateCounter + 1;
        }
        TrcTrace(Translate("_strSourceBarcode = "), _strSourceBarcode);
        STCC::SetElementBarcodeForSequencePos(i_ML_STAR, io_trp_Source_BCScanning, -1, hslTrue, _strSourceBarcode);
        o_arrSourceBarcodes.AddAsLast(_strSourceBarcode);
        TrcTrace(Translate("_strSourceBarcode = "), _strSourceBarcode);
        _intSourceBarcodeArraySize=o_arrSourceBarcodes.GetSize();
        TrcTrace(Translate("_intSourceBarcodeArraySize = "), _intSourceBarcodeArraySize);
        Util2::Debug::TraceArray(Translate("Array of Source Barcodes"), o_arrSourceBarcodes);
        SeqIncrement(io_trp_Source_BCScanning, 1);
      }
    }
    {
      for(_loopCounter2 = 0; _loopCounter2 < i_intNumberOfDestinationPlates;)
      {
        _loopCounter2 = _loopCounter2 + 1;
        if (i_intNumberOfDestinationPlates == _loopCounter2)
        {
          _blnPark = 1;
        }
        i_ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        {
          	variable arrRetValues[];
          	arrRetValues = i_ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
          	_strDestBarcode = arrRetValues[3];
        }
        i_ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (i_blnSimulationMode == 1)
        {
          _strDestBarcode = StrConcat2(Translate("DestinationBarcode"), _intDestPlateCounter);
          _intDestPlateCounter = _intDestPlateCounter + 1;
        }
        TrcTrace(Translate("_strDestBarcode = "), _strDestBarcode);
        STCC::SetElementBarcodeForSequencePos(i_ML_STAR, io_trp_Dest_BCScanning, -1, hslTrue, _strDestBarcode);
        o_arrDestBarcodes.AddAsLast(_strDestBarcode);
        TrcTrace(Translate("_strDestBarcode = "), _strDestBarcode);
        _intDestBarcodeArraySize=o_arrDestBarcodes.GetSize();
        TrcTrace(Translate("_intDestBarcodeArraySize = "), _intDestBarcodeArraySize);
        Util2::Debug::TraceArray(Translate("Array of Destination Barcodes"), o_arrDestBarcodes);
        SeqIncrement(io_trp_Dest_BCScanning, 1);
      }
    }
    MECC::TraceComment(Translate("###########################################\n                BARCODE ACQUISITON: END\n###########################################"));
  }

  function BarcodeAcquisitionISWAP( device & i_ML_STAR, variable i_blnSimulationMode, variable i_intNumberOfSourcePlates, variable i_intNumberOfDestinationPlates, sequence & io_trp_Source_BCScanning, sequence & io_trp_Dest_BCScanning, variable & o_arrSourceBarcodes[], variable & o_arrDestBarcodes[], variable i_intSourceGripHeight, variable i_intSourceGripWidth, variable i_intSourceGripOpenWidth, variable i_intDestGripHeight, variable i_intDestGripWidth, variable i_intDestGripOpenWidth ) void {
    private variable _intDestBarcodeArraySize;
    private variable _strDestBarcode;
    private variable _intDestPlateCounter;
    private variable _loopCounter1;
    private variable _intSourceBarcodeArraySize;
    private variable _loopCounter2;
    private variable _blnPark;
    private variable _strSourceBarcode;
    private variable _intSourcePlateCounter;
    MECC::TraceComment(Translate("###########################################\n                BARCODE ACQUISITON: START\n###########################################"));
    MECC::TraceComment(Translate("******************** Plate Counters and Arrays for Barcode Acquisiton ********************"));
    _intSourcePlateCounter = 1;
    _intDestPlateCounter = 1;
    o_arrSourceBarcodes.SetSize(0);
    o_arrDestBarcodes.SetSize(0);
    MECC::TraceComment(Translate("******************** Source Barcode ********************"));
    _blnPark = 0;
    {
      for(_loopCounter1 = 0; _loopCounter1 < i_intNumberOfSourcePlates;)
      {
        _loopCounter1 = _loopCounter1 + 1;
        i_ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        {
          	variable arrRetValues[];
          	arrRetValues = i_ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
          	_strSourceBarcode = arrRetValues[2];
        }
        i_ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        if (i_blnSimulationMode == 1)
        {
          _strSourceBarcode = StrConcat2(Translate("SourceBarcode"), _intSourcePlateCounter);
          _intSourcePlateCounter = _intSourcePlateCounter + 1;
        }
        TrcTrace(Translate("_strSourceBarcode = "), _strSourceBarcode);
        STCC::SetElementBarcodeForSequencePos(i_ML_STAR, io_trp_Source_BCScanning, -1, hslTrue, _strSourceBarcode);
        o_arrSourceBarcodes.AddAsLast(_strSourceBarcode);
        TrcTrace(Translate("_strSourceBarcode = "), _strSourceBarcode);
        _intSourceBarcodeArraySize=o_arrSourceBarcodes.GetSize();
        TrcTrace(Translate("_intSourceBarcodeArraySize = "), _intSourceBarcodeArraySize);
        Util2::Debug::TraceArray(Translate("Array of Source Barcodes"), o_arrSourceBarcodes);
        SeqIncrement(io_trp_Source_BCScanning, 1);
      }
    }
    {
      for(_loopCounter2 = 0; _loopCounter2 < i_intNumberOfDestinationPlates;)
      {
        _loopCounter2 = _loopCounter2 + 1;
        if (i_intNumberOfDestinationPlates == _loopCounter2)
        {
          _blnPark = 1;
        }
        i_ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        {
          	variable arrRetValues[];
          	arrRetValues = i_ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
          	_strDestBarcode = arrRetValues[2];
        }
        i_ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        if (i_blnSimulationMode == 1)
        {
          _strDestBarcode = StrConcat2(Translate("DestinationBarcode"), _intDestPlateCounter);
          _intDestPlateCounter = _intDestPlateCounter + 1;
        }
        TrcTrace(Translate("_strDestBarcode = "), _strDestBarcode);
        STCC::SetElementBarcodeForSequencePos(i_ML_STAR, io_trp_Dest_BCScanning, -1, hslTrue, _strDestBarcode);
        o_arrDestBarcodes.AddAsLast(_strDestBarcode);
        TrcTrace(Translate("_strDestBarcode = "), _strDestBarcode);
        _intDestBarcodeArraySize=o_arrDestBarcodes.GetSize();
        TrcTrace(Translate("_intDestBarcodeArraySize = "), _intDestBarcodeArraySize);
        Util2::Debug::TraceArray(Translate("Array of Destination Barcodes"), o_arrDestBarcodes);
        SeqIncrement(io_trp_Dest_BCScanning, 1);
      }
    }
    MECC::TraceComment(Translate("###########################################\n                BARCODE ACQUISITON: END\n###########################################"));
  }
} // library namespace
