#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "Hamilton Centrifuge\\Hamilton Centrifuge.hsl"
#include "HSLUtilLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLStrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace CENTRIFUGECONTROLLER {
  variable _blnSimulation;
  variable _strCentrifugeNodeName;
  variable _strCentrifugeLabel;
  variable _blnInitialized;
  variable _intNumberOfRetriesForCentrifugation;
  variable _intAcceleration;
  variable _intMaxSpeed;
  variable _intMinSpeed;
  variable _blnParallel;
  variable _intDeceleration;
  private function Abstract(  ) void ;
  function CloseCentrifuge(  ) variable ;
  function Initialize(  ) variable ;
  function MoveToPosition( variable i_strPosition ) variable ;
  function OpenCentrifuge(  ) variable ;
  function StartCentrifuge( variable i_intSpeed, variable i_intDirection, variable i_intDuration, variable i_blnWaitForStop ) variable ;
  function Terminate(  ) variable ;
  function WaitForStop(  ) variable ;
  private function _CentrifugeParallel(  ) void ;
  private function _Definitions(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Initialize(  ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturn;
    private variable intTraceLevel;
    private variable intErrorNumber;
    private variable strErrorDescription;
    private variable strErrorMessage;
    strFunctionName = "";
    strMethodName = Translate("");
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, strFunctionName, strMethodName, Translate(""));
    _blnInitialized = ASWGLOBAL::BOOL::FALSE;
    _blnParallel = ASWGLOBAL::BOOL::FALSE;
    _blnSimulation = Util::GetSimulationMode();
    _Definitions();
    intTraceLevel = TRACELEVEL::GetTraceLevel();
    blnReturn = HamiltonCentrifuge::SetTraceLevel(intTraceLevel);
    if (blnReturn == ASWGLOBAL::BOOL::FALSE)
    {
      HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
      strErrorMessage = StrConcat4(Translate("Could not set trace level: "), intErrorNumber, Translate(" - "), strErrorDescription);
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnReturn = HamiltonCentrifuge::Initialize(_strCentrifugeLabel, _strCentrifugeNodeName, _blnSimulation, ASWGLOBAL::BOOL::FALSE);
    if (blnReturn == ASWGLOBAL::BOOL::FALSE)
    {
      HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
      strErrorMessage = StrConcat4(Translate("Could not initialize centrifuge: "), intErrorNumber, Translate(" - "), strErrorDescription);
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      _blnInitialized = ASWGLOBAL::BOOL::TRUE;
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strMethodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function MoveToPosition( variable i_strPosition ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable intPosition;
    private variable strErrorMessage;
    private variable intErrorNumber;
    private variable blnReturn;
    private variable strErrorDescription;
    strFunctionName = "";
    strMethodName = Translate("");
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, strFunctionName, strMethodName, Translate(""));
    if (_blnInitialized == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Centrifuge not initialized."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (i_strPosition == "A")
    {
      intPosition = 1;
    }
    else
    {
      if (i_strPosition == "B")
      {
        intPosition = 2;
      }
      else
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Invalid position! Value must be either 'A' or 'B'."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (_blnParallel == ASWGLOBAL::BOOL::TRUE)
    {
      blnReturn = WaitForStop();
      if (blnReturn == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Could not wait for stop."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    blnReturn = HamiltonCentrifuge::PresentPosition(_strCentrifugeLabel, intPosition);
    if (blnReturn == ASWGLOBAL::BOOL::FALSE)
    {
      HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
      strErrorMessage = StrConcat4(Translate("Could not move centrifuge to position: "), intErrorNumber, Translate(" - "), strErrorDescription);
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strMethodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function OpenCentrifuge(  ) variable {
    private variable intErrorNumber;
    private variable strMethodName;
    private variable blnReturn;
    private variable strFunctionName;
    private variable strErrorDescription;
    private variable strErrorMessage;
    strFunctionName = "";
    strMethodName = Translate("");
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, strFunctionName, strMethodName, Translate(""));
    if (_blnInitialized == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Centrifuge not initialized."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (_blnParallel == ASWGLOBAL::BOOL::TRUE)
    {
      blnReturn = WaitForStop();
      if (blnReturn == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Could not wait for stop."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    blnReturn = HamiltonCentrifuge::CoverOpen(_strCentrifugeLabel);
    if (blnReturn == ASWGLOBAL::BOOL::FALSE)
    {
      HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
      strErrorMessage = StrConcat4(Translate("Could not open centrifuge cover: "), intErrorNumber, Translate(" - "), strErrorDescription);
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strMethodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function CloseCentrifuge(  ) variable {
    private variable intErrorNumber;
    private variable strMethodName;
    private variable blnReturn;
    private variable strFunctionName;
    private variable strErrorDescription;
    private variable strErrorMessage;
    strFunctionName = "";
    strMethodName = Translate("");
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, strFunctionName, strMethodName, Translate(""));
    if (_blnInitialized == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Centrifuge not initialized."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (_blnParallel == ASWGLOBAL::BOOL::TRUE)
    {
      blnReturn = WaitForStop();
      if (blnReturn == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Could not wait for stop."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    blnReturn = HamiltonCentrifuge::CoverClose(_strCentrifugeLabel);
    if (blnReturn == ASWGLOBAL::BOOL::FALSE)
    {
      HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
      strErrorMessage = StrConcat4(Translate("Could not open centrifuge cover: "), intErrorNumber, Translate(" - "), strErrorDescription);
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strMethodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Terminate(  ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable intErrorNumber;
    private variable blnReturn;
    private variable strErrorDescription;
    private variable strErrorMessage;
    private timer hdlDelayTimer;
    strFunctionName = "";
    strMethodName = Translate("");
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, strFunctionName, strMethodName, Translate(""));
    if (_blnInitialized == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Centrifuge not initialized."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (_blnParallel == ASWGLOBAL::BOOL::TRUE)
    {
      if( 0 == hdlDelayTimer.SetTimer(2) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      {
        while (_blnParallel == ASWGLOBAL::BOOL::TRUE)
        {
          if( 0 == hdlDelayTimer.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == hdlDelayTimer.RestartTimer() )
          {
                MECC::RaiseRuntimeErrorEx(-1305607936, MECC::IDS::stepNameTimerRestart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    blnReturn = HamiltonCentrifuge::Terminate(_strCentrifugeLabel);
    if (blnReturn == ASWGLOBAL::BOOL::FALSE)
    {
      HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
      strErrorMessage = StrConcat4(Translate("Unable to terminate centrifuge: "), intErrorNumber, Translate(" - "), strErrorDescription);
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strMethodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function StartCentrifuge( variable i_intSpeed, variable i_intDirection, variable i_intDuration, variable i_blnWaitForStop ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable intNumberOfCentrifugationAttempts;
    private variable intLoopCounter_CentrifugationAttempts;
    private variable blnReturn;
    private variable blnInputValid;
    private variable strErrorMessage;
    private variable intErrorNumber;
    private variable strErrorDescription;
    private timer hdlDelayTimer;
    private variable intProfileStatus;
    private variable blnGravitySensorTrip;
    private variable blnRotorDriveRunning;
    private variable intCurrentSpeed;
    private variable intTimeLeft;
    private variable blnSpeedSensorTrip;
    private variable blnTemperatureSensorTrip;
    private variable blnRepeatRequested;
    private variable intNextAttempt;
    private variable hdlParallelProcess;
    private variable intSpeedAtLastStatusCheck;
    private variable arrintSpeeds[];
    private variable arrintAccelerations[];
    private variable arrintDurations[];
    private variable intDirection;
    strFunctionName = "";
    strMethodName = Translate("");
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, strFunctionName, strMethodName, Translate(""));
    if (_blnInitialized == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Centrifuge not initialized."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnInputValid = ASWGLOBAL::BOOL::FALSE;
    blnInputValid = i_intSpeed >= _intMinSpeed && i_intSpeed <= _intMaxSpeed;
    if (blnInputValid == ASWGLOBAL::BOOL::FALSE)
    {
      strErrorMessage = StrConcat8(Translate("Requested centrifugation speed out of range ("), _intMinSpeed, Translate(".."), _intMaxSpeed, Translate(")."), Translate(""), Translate(""), Translate(""));
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnInputValid = Util::IsInteger(i_intDirection) && (i_intDirection == 1 || i_intDirection == 2);
    if (blnInputValid == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Direction must be either 1 (clockwise) or 2 (counter-clockwise)."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (_blnParallel == ASWGLOBAL::BOOL::TRUE)
    {
      blnReturn = WaitForStop();
      if (blnReturn == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Could not wait for stop."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    intNumberOfCentrifugationAttempts = _intNumberOfRetriesForCentrifugation + 1;
    intSpeedAtLastStatusCheck = 0;
    {
      for(intLoopCounter_CentrifugationAttempts = 0; intLoopCounter_CentrifugationAttempts < intNumberOfCentrifugationAttempts;)
      {
        intLoopCounter_CentrifugationAttempts = intLoopCounter_CentrifugationAttempts + 1;
        arrintSpeeds.SetSize(0);
        arrintSpeeds.AddAsLast(i_intSpeed);
        arrintAccelerations.SetSize(0);
        arrintAccelerations.AddAsLast(_intAcceleration);
        arrintDurations.SetSize(0);
        arrintDurations.AddAsLast(i_intDuration);
        if (i_intDirection == 1)
        {
          intDirection = HamiltonCentrifuge::CLOCKWISE;
        }
        else
        {
          intDirection = HamiltonCentrifuge::COUNTERCLOCKWISE;
        }
        blnReturn = HamiltonCentrifuge::Centrifuge(_strCentrifugeLabel, ASWGLOBAL::BOOL::TRUE, 1, intDirection, arrintSpeeds, arrintAccelerations, arrintDurations, _intDeceleration);
        if(0){
          blnReturn = HamiltonCentrifuge::StartCentrifuge(_strCentrifugeLabel, intDirection, i_intSpeed, _intAcceleration, i_intDuration);
        }
        if (blnReturn == ASWGLOBAL::BOOL::FALSE)
        {
          HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
          strErrorMessage = StrConcat4(Translate("Could not start centrifugation: "), intErrorNumber, Translate(" - "), strErrorDescription);
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
          return (ASWGLOBAL::BOOL::FALSE);
        }
        if( 0 == hdlDelayTimer.SetTimer(2) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        {
          while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
          {
            if( 0 == hdlDelayTimer.RestartTimer() )
            {
                  MECC::RaiseRuntimeErrorEx(-1305607936, MECC::IDS::stepNameTimerRestart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == hdlDelayTimer.WaitTimer(hslFalse, hslFalse) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            blnReturn = HamiltonCentrifuge::GetRotationDriveStatus(_strCentrifugeLabel, blnRotorDriveRunning, intProfileStatus, intTimeLeft, intCurrentSpeed, blnSpeedSensorTrip, blnGravitySensorTrip, blnTemperatureSensorTrip);
            if (blnReturn == ASWGLOBAL::BOOL::FALSE)
            {
              HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
              strErrorMessage = StrConcat4(Translate("Could not get centrifuge status: "), intErrorNumber, Translate(" - "), strErrorDescription);
              TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
              return (ASWGLOBAL::BOOL::FALSE);
            }
            TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "time left: ", intTimeLeft, " - current speed: ", intCurrentSpeed, " - speed sensor state: ", blnSpeedSensorTrip, " - gravity sensor state: ", blnGravitySensorTrip, " - temperature sensor state: ", blnTemperatureSensorTrip);
            if (blnGravitySensorTrip == ASWGLOBAL::BOOL::TRUE)
            {
              blnReturn = HamiltonCentrifuge::ResetErrorStatus(_strCentrifugeLabel);
              if (blnReturn == ASWGLOBAL::BOOL::FALSE)
              {
                HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
                strErrorMessage = StrConcat4(Translate("Could not reset error status: "), intErrorNumber, Translate(" - "), strErrorDescription);
                TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
                return (ASWGLOBAL::BOOL::FALSE);
              }
              HamiltonCentrifuge::StopCentrifuge(_strCentrifugeLabel, _intAcceleration);
              if (blnReturn == ASWGLOBAL::BOOL::FALSE)
              {
                HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
                strErrorMessage = StrConcat4(Translate("Could not stop centrifuge: "), intErrorNumber, Translate(" - "), strErrorDescription);
                TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
                return (ASWGLOBAL::BOOL::FALSE);
              }
              blnRepeatRequested = ASWGLOBAL::BOOL::TRUE;
              break;
            }
            if (intTimeLeft == 0)
            {
              blnRepeatRequested = ASWGLOBAL::BOOL::FALSE;
              break;
            }
            if (intCurrentSpeed == intSpeedAtLastStatusCheck)
            {
              blnRepeatRequested = ASWGLOBAL::BOOL::FALSE;
              break;
            }
            if (_blnSimulation == ASWGLOBAL::BOOL::TRUE)
            {
              blnRepeatRequested = ASWGLOBAL::BOOL::FALSE;
              break;
            }
            intSpeedAtLastStatusCheck = intCurrentSpeed;
          }
        }
        if (blnRepeatRequested == ASWGLOBAL::BOOL::TRUE)
        {
          if (intLoopCounter_CentrifugationAttempts == intNumberOfCentrifugationAttempts)
          {
            TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Imbalance detected, no further retries."));
            return (ASWGLOBAL::BOOL::FALSE);
          }
          else
          {
            intNextAttempt = intLoopCounter_CentrifugationAttempts + 1;
            strErrorMessage = StrConcat4(Translate("Imbalance detected, starting "), intNextAttempt, Translate(". attempt."), Translate(""));
            TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, strErrorMessage);
          }
        }
        else
        {
          hdlParallelProcess = Fork("_CentrifugeParallel");
          if( 0 == hdlDelayTimer.SetTimer(1) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == hdlDelayTimer.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          break;
        }
      }
    }
    if (i_blnWaitForStop == ASWGLOBAL::BOOL::TRUE)
    {
      blnReturn = WaitForStop();
      if (blnReturn == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Could not wait for stop."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strMethodName, Translate("Centrifugation finished."));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Definitions(  ) void {
    _strCentrifugeNodeName = Translate("CF");
    _strCentrifugeLabel = Translate("Centrifuge");
    _intNumberOfRetriesForCentrifugation = 2;
    _intAcceleration = 6500;
    _intDeceleration = 6500;
    _intMinSpeed = 201;
    _intMaxSpeed = 4200;
  }

  private function Abstract(  ) void {
  }

  function WaitForStop(  ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private timer hdlDelayTimer;
    strFunctionName = "";
    strMethodName = Translate("");
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, strFunctionName, strMethodName, Translate(""));
    if (_blnInitialized == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Centrifuge not initialized."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (_blnParallel == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, Translate("Centrifuge not runnning."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if( 0 == hdlDelayTimer.SetTimer(2) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      while (_blnParallel == ASWGLOBAL::BOOL::TRUE)
      {
        if( 0 == hdlDelayTimer.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == hdlDelayTimer.RestartTimer() )
        {
              MECC::RaiseRuntimeErrorEx(-1305607936, MECC::IDS::stepNameTimerRestart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strMethodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _CentrifugeParallel(  ) void {
    private variable intErrorNumber;
    private variable blnTemperatureSensorTrip;
    private variable intProfileStatus;
    private variable strMethodName;
    private variable blnReturn;
    private variable blnGravitySensorTrip;
    private variable strFunctionName;
    private variable strErrorDescription;
    private variable blnRotorDriveRunning;
    private variable intCurrentSpeed;
    private variable intTimeLeft;
    private variable blnSpeedSensorTrip;
    private variable strErrorMessage;
    private timer hdlDelayTimer;
    _blnParallel = ASWGLOBAL::BOOL::TRUE;
    if( 0 == hdlDelayTimer.SetTimer(2) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        if( 0 == hdlDelayTimer.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnReturn = HamiltonCentrifuge::GetRotationDriveStatus(_strCentrifugeLabel, blnRotorDriveRunning, intProfileStatus, intTimeLeft, intCurrentSpeed, blnSpeedSensorTrip, blnGravitySensorTrip, blnTemperatureSensorTrip);
        if (blnReturn == ASWGLOBAL::BOOL::FALSE)
        {
          HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
          strErrorMessage = StrConcat4(Translate("Could not get centrifuge status: "), intErrorNumber, Translate(" - "), strErrorDescription);
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::ERROR, strFunctionName, strMethodName, strErrorMessage);
        }
        TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "time left: ", intTimeLeft, " - current speed: ", intCurrentSpeed, " - speed sensor state: ", blnSpeedSensorTrip, " - gravity sensor state: ", blnGravitySensorTrip, " - temperature sensor state: ", blnTemperatureSensorTrip);
        if (intTimeLeft == 0)
        {
          break;
        }
        if( 0 == hdlDelayTimer.RestartTimer() )
        {
              MECC::RaiseRuntimeErrorEx(-1305607936, MECC::IDS::stepNameTimerRestart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    blnReturn = HamiltonCentrifuge::StopCentrifuge(_strCentrifugeLabel, _intAcceleration);
    if (blnReturn == ASWGLOBAL::BOOL::FALSE)
    {
      HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
      strErrorMessage = StrConcat4(Translate("Could not stop centrifuge: "), intErrorNumber, Translate(" - "), strErrorDescription);
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::ERROR, strFunctionName, strMethodName, strErrorMessage);
    }
    if( 0 == hdlDelayTimer.SetTimer(2) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        if( 0 == hdlDelayTimer.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnReturn = HamiltonCentrifuge::GetRotationDriveStatus(_strCentrifugeLabel, blnRotorDriveRunning, intProfileStatus, intTimeLeft, intCurrentSpeed, blnSpeedSensorTrip, blnGravitySensorTrip, blnTemperatureSensorTrip);
        if (blnReturn == ASWGLOBAL::BOOL::FALSE)
        {
          HamiltonCentrifuge::GetLastError(_strCentrifugeLabel, intErrorNumber, strErrorDescription);
          strErrorMessage = StrConcat4(Translate("Could not get centrifuge status: "), intErrorNumber, Translate(" - "), strErrorDescription);
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::ERROR, strFunctionName, strMethodName, strErrorMessage);
        }
        TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "time left: ", intTimeLeft, " - current speed: ", intCurrentSpeed, " - speed sensor state: ", blnSpeedSensorTrip, " - gravity sensor state: ", blnGravitySensorTrip, " - temperature sensor state: ", blnTemperatureSensorTrip);
        if (blnRotorDriveRunning == ASWGLOBAL::BOOL::FALSE)
        {
          break;
        }
        if( 0 == hdlDelayTimer.RestartTimer() )
        {
              MECC::RaiseRuntimeErrorEx(-1305607936, MECC::IDS::stepNameTimerRestart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    _blnParallel = ASWGLOBAL::BOOL::FALSE;
  }
} // library namespace
