#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLStrLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLMthLib.hsl"
#include "lookup.hs_"
#include "HSLML_STARLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace CHECKCARRIERPRESENCEABSENCE {
  function CheckCarriers( device & ML_STAR, variable & arrayCarriersExpected[] ) void ;
  function CheckCarriersSTARPlus( device & ML_STAR, variable & arrayCarriersExpected[] ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOOKUP::_InitLibrary();
  }
  function _ExitLibrary() {
    LOOKUP::_ExitLibrary();
  }

  function CheckCarriers( device & ML_STAR, variable & arrayCarriersExpected[] ) void {
    private variable numberOfCarriers;
    private variable loopCounterCarriers;
    private variable retVal_FirmwareCommand_new;
    private variable retVal_FirmwareCommand;
    private variable strRight_FirmwareCommand;
    private variable loopCounter1;
    private variable binaryString;
    private variable strLeft;
    private variable arrayExpectedTracks[];
    private variable arrBinaryVallues[];
    private variable xCoord;
    private variable width_MM;
    private variable binaryStringExpected;
    private variable numberOfTracks;
    private variable loopCounterTracks;
    private variable rightTrack;
    private variable angle;
    private variable zCoord;
    private variable yCoord;
    private variable lookupReturn;
    private dialog dialogHandle1;
    private variable sim;
    private variable dialogueReturn;
    private variable loopCounter2;
    private variable loopNumber;
    private variable traceLevel;
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                          CheckCarrierPresenceAbsence::CheckCarriers\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    traceLevel = TRACELEVEL::GetTraceLevel();
    if (traceLevel >= 2)
    {
      Util2::Debug::TraceArray(Translate("Input parameters - array of carriers expected:"), arrayCarriersExpected);
    }
    sim = HSLML_STAR::IsSimulatorMode(ML_STAR);
    numberOfCarriers=arrayCarriersExpected.GetSize();
    arrayExpectedTracks.SetSize(0);
    {
      for(loopCounterCarriers = 0; loopCounterCarriers < numberOfCarriers;)
      {
        loopCounterCarriers = loopCounterCarriers + 1;
        numberOfTracks = DevGetLabwareData(ML_STAR, arrayCarriersExpected.ElementAt( loopCounterCarriers -1), Translate("MlStarCarWidthAsT"));
        numberOfTracks = StrIVal(numberOfTracks);
        DevGetLabwarePosition(ML_STAR, arrayCarriersExpected.ElementAt( loopCounterCarriers -1), xCoord, yCoord, zCoord, angle);
        xCoord = xCoord - 100;
        width_MM = numberOfTracks * 22.5;
        rightTrack = xCoord + width_MM;
        rightTrack = rightTrack / 22.5;
        rightTrack = MthFloor(rightTrack);
        arrayExpectedTracks.AddAsLast(rightTrack);
      }
    }
    binaryStringExpected = Translate("");
    {
      for(loopCounterTracks = 0; loopCounterTracks < 56;)
      {
        loopCounterTracks = loopCounterTracks + 1;
        lookupReturn = LOOKUP::Lookup(arrayExpectedTracks, loopCounterTracks);
        if (lookupReturn == 0)
        {
          binaryStringExpected = StrConcat2(binaryStringExpected, Translate("0"));
        }
        else
        {
          binaryStringExpected = StrConcat2(binaryStringExpected, Translate("1"));
        }
      }
    }
    if (traceLevel >= 2)
    {
      TrcTrace(Translate(" ---------------------------------Expected carriers = "), binaryStringExpected);
    }
    if (sim == 1)
    {
      MECC::TraceComment(Translate("--------------------------------------------------STAR is in simulation - no carrier check performed"));
    }
    else
    {
      {
        while (1 == 1)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            	retVal_FirmwareCommand = arrRetValues[3];
          }
          retVal_FirmwareCommand_new = StrLeft(retVal_FirmwareCommand, 23);
          retVal_FirmwareCommand_new = StrRight(retVal_FirmwareCommand_new, 14);
          arrBinaryVallues.SetSize(0);
          {
            for(loopCounter1 = 0; loopCounter1 < 14;)
            {
              loopCounter1 = loopCounter1 + 1;
              strRight_FirmwareCommand = StrRight(retVal_FirmwareCommand_new, loopCounter1);
              strLeft = StrLeft(strRight_FirmwareCommand, 1);
              if (strLeft == "0")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "1")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "2")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "3")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "4")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "5")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "6")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "7")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "8")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "9")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "A")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "B")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "C")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "D")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "E")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "F")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
              }
            }
          }
          loopNumber=arrBinaryVallues.GetSize();
          binaryString = Translate("");
          {
            for(loopCounter2 = 0; loopCounter2 < loopNumber;)
            {
              loopCounter2 = loopCounter2 + 1;
              binaryString = StrConcat4(binaryString, arrBinaryVallues.ElementAt( loopCounter2 -1), Translate(""), Translate(""));
            }
          }
          if (traceLevel >= 2)
          {
            TrcTrace(Translate(" ---------------------------------Detected carriers = "), binaryString);
          }
          if (binaryString == binaryStringExpected)
          {
            MECC::TraceComment(Translate("----------------------------------------Expected and detected carriers match"));
            break;
          }
          else
          {
            dialogHandle1.SetOutput(Translate("The carriers detected on deck do not match those expected.  Please check that all the carriers are properly pushed in and on the correct tracks."), Translate("\n\nExpected carrier pattern = "), binaryStringExpected, Translate("\n\nDetected carrier pattern = "), binaryString, Translate("\n\nClick OK to try again or Cancel to Abort the method."));
            dialogueReturn = dialogHandle1.ShowOutput(Translate("ERROR - Expected Carriers not Detected"), hslOKCancel | hslError | hslDefButton1, hslInfinite);
            if (dialogueReturn == 2)
            {
              abort;
            }
          }
        }
      }
    }
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                          CheckCarrierPresenceAbsence::CheckCarriers END\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }

  function CheckCarriersSTARPlus( device & ML_STAR, variable & arrayCarriersExpected[] ) void {
    private dialog dialogHandle_1;
    private variable sim;
    private variable xCoord;
    private variable loopCounterCarriers;
    private variable width_MM;
    private variable retVal_FirmwareCommand_new;
    private variable binaryStringExpected;
    private variable numberOfTracks;
    private variable retVal_FirmwareCommand;
    private variable dialogueReturn;
    private variable numberOfCarriers;
    private variable strRight_FirmwareCommand;
    private variable loopCounter1;
    private variable lookupReturn;
    private variable loopCounterTracks;
    private variable loopCounter2;
    private variable loopNumber;
    private variable rightTrack;
    private variable angle;
    private variable zCoord;
    private variable binaryString;
    private variable strLeft;
    private variable yCoord;
    private variable arrayExpectedTracks[];
    private variable arrBinaryVallues[];
    private variable traceLevel;
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                          CheckCarrierPresenceAbsence::CheckCarriers\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    traceLevel = TRACELEVEL::GetTraceLevel();
    if (traceLevel >= 2)
    {
      Util2::Debug::TraceArray(Translate("Input parameters - array of carriers expected:"), arrayCarriersExpected);
    }
    sim = HSLML_STAR::IsSimulatorMode(ML_STAR);
    numberOfCarriers=arrayCarriersExpected.GetSize();
    arrayExpectedTracks.SetSize(0);
    {
      for(loopCounterCarriers = 0; loopCounterCarriers < numberOfCarriers;)
      {
        loopCounterCarriers = loopCounterCarriers + 1;
        numberOfTracks = DevGetLabwareData(ML_STAR, arrayCarriersExpected.ElementAt( loopCounterCarriers -1), Translate("MlStarCarWidthAsT"));
        numberOfTracks = StrIVal(numberOfTracks);
        DevGetLabwarePosition(ML_STAR, arrayCarriersExpected.ElementAt( loopCounterCarriers -1), xCoord, yCoord, zCoord, angle);
        xCoord = xCoord - 100;
        width_MM = numberOfTracks * 22.5;
        rightTrack = xCoord + width_MM;
        rightTrack = rightTrack / 22.5;
        rightTrack = MthFloor(rightTrack);
        arrayExpectedTracks.AddAsLast(rightTrack);
      }
    }
    binaryStringExpected = Translate("");
    {
      for(loopCounterTracks = 0; loopCounterTracks < 104;)
      {
        loopCounterTracks = loopCounterTracks + 1;
        lookupReturn = LOOKUP::Lookup(arrayExpectedTracks, loopCounterTracks);
        if (lookupReturn == 0)
        {
          binaryStringExpected = StrConcat2(binaryStringExpected, Translate("0"));
        }
        else
        {
          binaryStringExpected = StrConcat2(binaryStringExpected, Translate("1"));
        }
      }
    }
    if (traceLevel >= 2)
    {
      TrcTrace(Translate(" ---------------------------------Expected carriers = "), binaryStringExpected);
    }
    if (sim == 1)
    {
      MECC::TraceComment(Translate("--------------------------------------------------STAR is in simulation - no carrier check performed"));
    }
    else
    {
      {
        while (1 == 1)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            	retVal_FirmwareCommand = arrRetValues[3];
          }
          if(0){
            TrcTrace(Translate("retVal_FirmwareCommand = "), retVal_FirmwareCommand);
          }
          retVal_FirmwareCommand_new = StrRight(retVal_FirmwareCommand, 26);
          if(0){
            TrcTrace(Translate("retVal_FirmwareCommand_new = "), retVal_FirmwareCommand_new);
          }
          arrBinaryVallues.SetSize(0);
          {
            for(loopCounter1 = 0; loopCounter1 < 26;)
            {
              loopCounter1 = loopCounter1 + 1;
              strRight_FirmwareCommand = StrRight(retVal_FirmwareCommand_new, loopCounter1);
              strLeft = StrLeft(strRight_FirmwareCommand, 1);
              if (strLeft == "0")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "1")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "2")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "3")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "4")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "5")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "6")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "7")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
              }
              if (strLeft == "8")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "9")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "A")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "B")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "C")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "D")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "E")
              {
                arrBinaryVallues.AddAsLast(0);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
              }
              if (strLeft == "F")
              {
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
                arrBinaryVallues.AddAsLast(1);
              }
            }
          }
          loopNumber=arrBinaryVallues.GetSize();
          binaryString = Translate("");
          {
            for(loopCounter2 = 0; loopCounter2 < loopNumber;)
            {
              loopCounter2 = loopCounter2 + 1;
              binaryString = StrConcat4(binaryString, arrBinaryVallues.ElementAt( loopCounter2 -1), Translate(""), Translate(""));
            }
          }
          if (traceLevel >= 2)
          {
            TrcTrace(Translate(" ---------------------------------Detected carriers = "), binaryString);
          }
          if (binaryString == binaryStringExpected)
          {
            MECC::TraceComment(Translate("----------------------------------------Expected and detected carriers match"));
            break;
          }
          else
          {
            dialogHandle_1.SetOutput(Translate("The carriers detected on deck do not match those expected.  Please check that all the carriers are properly pushed in and on the correct tracks."), Translate("\n\nExpected carrier pattern = "), binaryStringExpected, Translate("\n\nDetected carrier pattern = "), binaryString, Translate("\n\nClick OK to try again or Cancel to Abort the method."));
            dialogueReturn = dialogHandle_1.ShowOutput(Translate("ERROR - Expected Carriers not Detected"), hslOKCancel | hslError | hslDefButton1, hslInfinite);
            if (dialogueReturn == 2)
            {
              abort;
            }
          }
        }
      }
    }
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                          CheckCarrierPresenceAbsence::CheckCarriers END\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }
} // library namespace
