#pragma once
#include "Training\\BF4\\HSLExtensions\\String.hsl"
#include "Training\\BF4\\HSLTrcLib.hsl"
#include "Training\\BF4\\HSLUtilLib2.hsl"
#include "HSLUtilLib.hsl"
#include "Alpha Numeric Conversion\\Alpha Numeric Conversion.hs_"
#include "Training\\BF4\\HSLExtensions\\Directory.hsl"
#include "Training\\BF4\\HSLExtensions\\File.hsl"
#include "HSLStrLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLFilLib.hsl"
#include "Training\\BF4\\HSLDevLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLVectorDbTracking.hsl"
#include "Training\\BF4\\ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "STAR Tools\\STAR MPH96 Tools.hs_"
#include "Training\\BF4\\ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "Training\\BF4\\HSLMthLib.hsl"
#include "HSLMETEDLib.hs_"
#include "Training\\BF4\\HSLMECCLib.hs_"
#include "Training\\BF4\\HSLPTLLib.hsl"
#include "Training\\BF4\\HSLSTCCLib.hs_"

namespace DATACONTROLLER {
  variable t_blnSkpTimers(0);
  variable t_blnTimersStoppable(0);
  variable t_strTrackingFilePath("");
  variable t_blnSimulationMode;
  variable t_intForkID;
  event t_eventWaitForParallel;
  variable t_blnShowSampleReport;
  variable t_strAspReturnValue;
  variable t_strReportPath;
  variable t_blnShowReagentReport;
  variable t_strDispReturnValue;
  variable t_strLiquidClass;
  variable t_strNameForTransfer;
  variable t_strLiquidLevelReturn;
  variable t_strDeckLayoutFile;
  variable t_strTipPickUpReturn;
  variable t_strDispReturnValue3;
  variable t_strDispReturnValue4;
  variable t_strAspReturnValue3;
  variable t_strAspReturnValue4;
  variable t_blnMPH96;
  function DATA_CalculateMixVolume( variable i_fltTotalVolume, variable & o_fltMixVolume, variable i_intModule ) void ;
  function FILE_ExportTrackingFiles( device & ML_STAR, sequence i_seqFinalPlate, variable i_strNameForFile, variable & o_strFinalFilePath, variable & o_strMappingFilePath ) void ;
  function FILE_InitializeTrackingFile( device & ML_STAR ) void ;
  function FILE_StandardWorklist_Extraction( variable i_strPathInputFileWL, variable i_strSeparatorWL, variable & o_arrArraySampleID[], variable & o_arrArrayBarcode[], variable & o_arrArrayWellPosition[], variable & o_arrArrayComment[] ) void ;
  function FILE_UpdateTrackingFileStatus( variable i_blnAddTimeStamp, variable i_strStatusUpdate ) void ;
  function FILE_UpdateTransferReportChannels( device & Instrument, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidLevelReturnValue, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void ;
  function FILE_UpdateTransferReportMPH( device & Instrument, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_TipPickUpValue3, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void ;
  function INIT_InitializeController( variable i_blnSimulationMode, variable i_blnTimersStoppable, variable i_blnSkipTimers, variable i_strTrackingFilePath ) void ;
  function TIME_TimerStart( variable i_intIncubationTime, variable i_strNameForIncubation, variable i_blnWaitForTimer, timer & o_hdlTimer ) void ;
  function TIME_WaitForTimer( timer & i_hdlTimerToWait ) void ;
  private function _Asp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void ;
  private function _Disp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void ;
  private function _Recovery_Codes( variable i_int_RecoveryUsed, variable & o_str_RecoveryUsed ) void ;
  private function _Report( device & Instrument, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidLevelReturnValue, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void ;
  private function _ReportMPH96( device & Instrument, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_PickupReturnValue3, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void ;
  private function _ReportStarter(  ) void ;
  private function _VersionHistory(  ) void ;
  function _WaitForReport(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ANC::_InitLibrary();
    LPQ::_InitLibrary();
    STAR_MPH96_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    ANC::_ExitLibrary();
    LPQ::_ExitLibrary();
    STAR_MPH96_TOOLS::_ExitLibrary();
  }

  function TIME_TimerStart( variable i_intIncubationTime, variable i_strNameForIncubation, variable i_blnWaitForTimer, timer & o_hdlTimer ) void {
    private variable l_intReturnValue;
    private variable l_intElapsedTime;
    if (t_blnSkpTimers == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------------- SKIP TIMER"));
      if( 0 == o_hdlTimer.SetTimer(0) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == o_hdlTimer.WaitTimer(hslFalse, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      return;
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate("Start incubating timer "), i_strNameForIncubation, Translate(" for "), i_intIncubationTime, Translate(" seconds "), Translate(""));
    if( 0 == o_hdlTimer.SetTimer(i_intIncubationTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Util::SetTimerViewName(o_hdlTimer, i_strNameForIncubation);
    if (i_blnWaitForTimer == ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate("Wait for incubating timer "), i_strNameForIncubation, Translate(""), Translate(""), Translate(""), Translate(""));
      if (t_blnTimersStoppable == ASWGLOBAL::BOOL::TRUE)
      {
        l_intReturnValue = o_hdlTimer.WaitTimer(hslTrue, hslTrue);
        if (0 == l_intReturnValue)
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        l_intReturnValue = o_hdlTimer.WaitTimer(hslTrue, hslFalse);
        if (0 == l_intReturnValue)
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      if (l_intReturnValue == 3)
      {
        MECC::TraceComment(Translate("TIMER STOPPED EARLY!"));
      }
      l_intElapsedTime = o_hdlTimer.GetElapsedTime();
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Total time incubated: "), l_intElapsedTime, Translate(" seconds"), Translate(""));
    }
  }

  function FILE_StandardWorklist_Extraction( variable i_strPathInputFileWL, variable i_strSeparatorWL, variable & o_arrArraySampleID[], variable & o_arrArrayBarcode[], variable & o_arrArrayWellPosition[], variable & o_arrArrayComment[] ) void {
    private variable FromWL_WellPosition;
    private variable FromWL_SampleID;
    private variable loopCounter1;
    private variable Size_ArrayInfoWorklist;
    private variable FromWL_Comment;
    private variable FromWL_Barcode;
    private variable Concat_Information;
    private file fileInput;
    private variable Array_InfoWlistRowX[];
    private variable l_strComment;
    private variable l_strWellID;
    private variable l_strBarcodeID;
    private variable l_strSampleID;
    private file hdl_Write;
    private variable l_intTotalInWorkList;
    private variable l_intIndex;
    o_arrArraySampleID.SetSize( 0);
    o_arrArrayBarcode.SetSize( 0);
    o_arrArrayWellPosition.SetSize( 0);
    o_arrArrayComment.SetSize( 0);
    fileInput.AddField(1, Concat_Information, hslString);
    fileInput.SetDelimiter(hslAsciiText);
    if( 0 == fileInput.Open(i_strPathInputFileWL, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strPathInputFileWL, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (fileInput.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        FromWL_SampleID = Translate("");
        FromWL_Barcode = Translate("");
        FromWL_WellPosition = Translate("");
        FromWL_Comment = Translate("");
        if (loopCounter1 == 1)
        {
          if( 0 == fileInput.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if( 0 == fileInput.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TrcTrace(Translate("Concat_Information==="), Concat_Information);
        Array_InfoWlistRowX = HSLExtensions::String::Split(Concat_Information, i_strSeparatorWL, ASWGLOBAL::BOOL::FALSE);
        Size_ArrayInfoWorklist=Array_InfoWlistRowX.GetSize();
        if (Size_ArrayInfoWorklist > 0)
        {
          FromWL_SampleID=Array_InfoWlistRowX.GetAt(1-1);
          if (Size_ArrayInfoWorklist >= 2)
          {
            FromWL_Barcode=Array_InfoWlistRowX.GetAt(2-1);
          }
          if (Size_ArrayInfoWorklist >= 3)
          {
            FromWL_WellPosition=Array_InfoWlistRowX.GetAt(3-1);
            ANC::Alpha_Num_Remove_0_from_Position(FromWL_WellPosition);
          }
          if (Size_ArrayInfoWorklist >= 4)
          {
            FromWL_Comment=Array_InfoWlistRowX.GetAt(4-1);
          }
          o_arrArraySampleID.AddAsLast(FromWL_SampleID);
          o_arrArrayBarcode.AddAsLast(FromWL_Barcode);
          o_arrArrayWellPosition.AddAsLast(FromWL_WellPosition);
          o_arrArrayComment.AddAsLast(FromWL_Comment);
        }
      }
    }
    if( 0 != fileInput.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileInput.RemoveFields();
    Util2::Debug::TraceArray_4(Translate("Sample ID    Barcode     Well Position     Comment"), o_arrArraySampleID, o_arrArrayBarcode, o_arrArrayWellPosition, o_arrArrayComment);
    l_intTotalInWorkList=o_arrArraySampleID.GetSize();
    hdl_Write.AddField("SAMPLE_ID", l_strSampleID, hslString, 255);
    hdl_Write.AddField("BARCODE", l_strBarcodeID, hslString, 255);
    hdl_Write.AddField("WELL_ID", l_strWellID, hslString, 255);
    hdl_Write.AddField("COMMENT", l_strComment, hslString, 255);
    if( 0 == hdl_Write.Open(t_strTrackingFilePath + " " + "WL", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strTrackingFilePath, "HxMetEdCompCmd");
    }
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalInWorkList;)
      {
        l_intIndex = l_intIndex + 1;
        l_strSampleID=o_arrArraySampleID.GetAt(l_intIndex-1);
        l_strBarcodeID=o_arrArrayBarcode.GetAt(l_intIndex-1);
        l_strWellID=o_arrArrayWellPosition.GetAt(l_intIndex-1);
        l_strComment=o_arrArrayComment.GetAt(l_intIndex-1);
        if( 0 == hdl_Write.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != hdl_Write.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hdl_Write.RemoveFields();
  }

  function TIME_WaitForTimer( timer & i_hdlTimerToWait ) void {
    private variable l_strTimerName;
    private variable l_intReturnValue;
    private variable l_intElapsedTime;
    if (t_blnSkpTimers == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------------- SKIP TIMER"));
      return;
    }
    l_strTimerName = Util::GetTimerViewName(i_hdlTimerToWait);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Now waiting for timer "), l_strTimerName, Translate(""), Translate(""));
    if (t_blnTimersStoppable == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReturnValue = i_hdlTimerToWait.WaitTimer(hslTrue, hslTrue);
      if (0 == l_intReturnValue)
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    else
    {
      l_intReturnValue = i_hdlTimerToWait.WaitTimer(hslTrue, hslFalse);
      if (0 == l_intReturnValue)
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    if (l_intReturnValue == 3)
    {
      MECC::TraceComment(Translate("TIMER STOPPED EARLY!"));
    }
    l_intElapsedTime = i_hdlTimerToWait.GetElapsedTime();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Total time incubated "), l_intElapsedTime, Translate(" seconds"), Translate(""));
  }

  function FILE_ExportTrackingFiles( device & ML_STAR, sequence i_seqFinalPlate, variable i_strNameForFile, variable & o_strFinalFilePath, variable & o_strMappingFilePath ) void {
    private variable l_strYearMonthFolderName;
    private variable l_strFileExists;
    private variable l_strTime;
    private variable l_strDate;
    private variable l_strHamiltonFolder;
    private variable l_strExportFolder;
    private variable l_strMappingFileName;
    private variable l_strExportFile;
    private variable l_strMethodsFolder;
    o_strFinalFilePath = 0;
    o_strMappingFilePath = 0;
    l_strFileExists = HSLExtensions::File::Exists(t_strTrackingFilePath);
    if (l_strFileExists == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strYearMonthFolderName = TimGetFormattedDate(Translate("%Y\\%m. %B\\%m_%d_%Y\\"));
    l_strDate = TimGetFormattedDate(Translate("%y%m%d"));
    l_strTime = TimGetFormattedTime(Translate("%H%M"));
    l_strMethodsFolder = FilGetMethodsPath();
    l_strHamiltonFolder = StrConcat2(l_strMethodsFolder, Translate(""));
    StrReplace(l_strHamiltonFolder, Translate("Methods"), Translate(""));
    l_strExportFolder = StrConcat4(l_strHamiltonFolder, Translate("Local Outputs"), Translate("\\"), l_strYearMonthFolderName);
    HSLExtensions::Directory::Create(l_strExportFolder);
    l_strExportFile = StrConcat8(l_strExportFolder, l_strTime, Translate("_"), Translate(""), i_strNameForFile, Translate(".xls"), Translate(""), Translate(""));
    HSLExtensions::File::Copy(t_strTrackingFilePath, l_strExportFile, ASWGLOBAL::BOOL::TRUE);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Export File: "), l_strExportFile);
    HSLExtensions::File::Delete(t_strTrackingFilePath);
    l_strMappingFileName = StrConcat4(l_strTime, Translate("_"), Translate(""), Translate("<BC>.xls"));
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_1[];
      variable _ColumnIdsArray_1[];
      variable _ColumnNamesArray_1[];
      variable _ExperimentsArray_1[];
      _FilterIdsArray_1.SetSize(0);
      _ColumnNamesArray_1.SetSize(3);
      _ColumnIdsArray_1.SetSize(3);
      _ColumnNamesArray_1.SetAt(0, "PLATE BARCODE");
      _ColumnIdsArray_1.SetAt(0, 1);
      _ColumnNamesArray_1.SetAt(1, "WELL");
      _ColumnIdsArray_1.SetAt(1, 3);
      _ColumnNamesArray_1.SetAt(2, "SAMPLE");
      _ColumnIdsArray_1.SetAt(2, 4);
      _ExperimentsArray_1.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqFinalPlate, 0, _FilterIdsArray_1, 0, _ColumnIdsArray_1, _ColumnNamesArray_1, _ExperimentsArray_1, l_strMappingFileName, 0, 0, l_strExportFolder, 1);
    }
  }

  function FILE_InitializeTrackingFile( device & ML_STAR ) void {
    private variable l_blnFileExists;
    private variable l_strComment;
    private variable l_strWellID;
    private variable l_strBarcodeID;
    private variable l_strSampleID;
    private file hdl_Write;
    private variable l_strStatus;
    l_blnFileExists = HSLExtensions::File::Exists(t_strTrackingFilePath);
    if (l_blnFileExists == ASWGLOBAL::BOOL::TRUE)
    {
      HSLExtensions::File::Delete(t_strTrackingFilePath);
    }
    FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), Translate(""), Translate(""), Translate(""), 0, 0, Translate(""));
    hdl_Write.AddField("SAMPLE_ID", l_strSampleID, hslString, 255);
    hdl_Write.AddField("BARCODE", l_strBarcodeID, hslString, 255);
    hdl_Write.AddField("WELL_ID", l_strWellID, hslString, 255);
    hdl_Write.AddField("COMMENT", l_strComment, hslString, 255);
    if( 0 == hdl_Write.Open(t_strTrackingFilePath + " " + "WL", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strTrackingFilePath, "HxMetEdCompCmd");
    }
    if( 0 != hdl_Write.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hdl_Write.RemoveFields();
    hdl_Write.AddField("METHOD_PROGRESS", l_strStatus, hslString, 255);
    if( 0 == hdl_Write.Open(t_strTrackingFilePath + " " + "STATUS", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strTrackingFilePath, "HxMetEdCompCmd");
    }
    if( 0 != hdl_Write.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hdl_Write.RemoveFields();
  }

  function INIT_InitializeController( variable i_blnSimulationMode, variable i_blnTimersStoppable, variable i_blnSkipTimers, variable i_strTrackingFilePath ) void {
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Simulation Mode Setting: "), i_blnSimulationMode, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Stoppable Timers: "), i_blnTimersStoppable, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Skip Timers: "), i_blnSkipTimers, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Tracking File Pathway: "), i_strTrackingFilePath, Translate(""));
    t_blnSimulationMode = i_blnSimulationMode;
    t_blnSkpTimers = i_blnSkipTimers;
    t_blnTimersStoppable = i_blnTimersStoppable;
    if (t_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("OVERIDE STOPPABLE TIMERS FOR SIMULATION MODE"));
      t_blnTimersStoppable = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Settings for Mapping File Information"));
    t_strTrackingFilePath = i_strTrackingFilePath;
    t_intForkID = 0;
    if( 0 == t_eventWaitForParallel.SetEvent() )
    {
          MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }

  function FILE_UpdateTrackingFileStatus( variable i_blnAddTimeStamp, variable i_strStatusUpdate ) void {
    private file l_hdlUpdateFile;
    private variable l_strStorageValue;
    private variable l_strDate;
    private variable l_strTime;
    l_strStorageValue = i_strStatusUpdate;
    if (i_blnAddTimeStamp == ASWGLOBAL::BOOL::TRUE)
    {
      l_strDate = TimGetFormattedDate(Translate("%m/%d/%Y"));
      l_strTime = TimGetFormattedTime(Translate("%H:%M"));
      l_strStorageValue = StrConcat8(l_strDate, Translate("  "), l_strTime, Translate("  "), i_strStatusUpdate, Translate(""), Translate(""), Translate(""));
    }
    l_hdlUpdateFile.AddField("METHOD_PROGRESS", l_strStorageValue, hslString, 255);
    if( 0 == l_hdlUpdateFile.Open(t_strTrackingFilePath + " " + "Status", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strTrackingFilePath, "HxMetEdCompCmd");
    }
    if( 0 == l_hdlUpdateFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != l_hdlUpdateFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlUpdateFile.RemoveFields();
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, l_strStorageValue, Translate(""));
  }

  private function _Asp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void {
    o_str_ErrorDescriptions = 0;
    o_str_ErrorDescriptions = Translate("");
    if (i_int_ErrorCode == 0)
    {
      o_str_ErrorDescriptions = Translate("No Error");
      return;
    }
    if (i_int_ErrorCode == 1)
    {
      o_str_ErrorDescriptions = Translate("Syntax Error");
      return;
    }
    if (i_int_ErrorCode == 2)
    {
      o_str_ErrorDescriptions = Translate("Hardware Error");
      return;
    }
    if (i_int_ErrorCode == 3)
    {
      o_str_ErrorDescriptions = Translate("Not Executed Error");
      return;
    }
    if (i_int_ErrorCode == 4)
    {
      o_str_ErrorDescriptions = Translate("Clot Error");
      return;
    }
    if (i_int_ErrorCode == 5)
    {
      o_str_ErrorDescriptions = Translate("Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 6)
    {
      o_str_ErrorDescriptions = Translate("Insufficient Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 7)
    {
      o_str_ErrorDescriptions = Translate("Tip Present Error");
      return;
    }
    if (i_int_ErrorCode == 8)
    {
      o_str_ErrorDescriptions = Translate("No Tip Error");
      return;
    }
    if (i_int_ErrorCode == 9)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 10)
    {
      o_str_ErrorDescriptions = Translate("Execution Error");
      return;
    }
    if (i_int_ErrorCode == 11)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 12)
    {
      o_str_ErrorDescriptions = Translate("Calibrate Error");
      return;
    }
    if (i_int_ErrorCode == 13)
    {
      o_str_ErrorDescriptions = Translate("Unload Error");
      return;
    }
    if (i_int_ErrorCode == 14)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 15)
    {
      o_str_ErrorDescriptions = Translate("Parameter Error");
      return;
    }
    if (i_int_ErrorCode == 16)
    {
      o_str_ErrorDescriptions = Translate("Cover Open Error");
      return;
    }
    if (i_int_ErrorCode == 17)
    {
      o_str_ErrorDescriptions = Translate("Improper Aspiration Error");
      return;
    }
    if (i_int_ErrorCode == 18)
    {
      o_str_ErrorDescriptions = Translate("Wash Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 19)
    {
      o_str_ErrorDescriptions = Translate("Temperature Error");
      return;
    }
    if (i_int_ErrorCode == 20)
    {
      o_str_ErrorDescriptions = Translate("TADM overshot");
      return;
    }
    if (i_int_ErrorCode == 21)
    {
      o_str_ErrorDescriptions = Translate("Labware Error");
      return;
    }
    if (i_int_ErrorCode == 22)
    {
      o_str_ErrorDescriptions = Translate("Labware Gripped Error");
      return;
    }
    if (i_int_ErrorCode == 23)
    {
      o_str_ErrorDescriptions = Translate("Labware Lost Error");
      return;
    }
    if (i_int_ErrorCode == 24)
    {
      o_str_ErrorDescriptions = Translate("Illegal target plate position");
      return;
    }
    if (i_int_ErrorCode == 25)
    {
      o_str_ErrorDescriptions = Translate("Illegal Intervention Error");
      return;
    }
    if (i_int_ErrorCode == 26)
    {
      o_str_ErrorDescriptions = Translate("TADM undershot");
      return;
    }
    if (i_int_ErrorCode == 27)
    {
      o_str_ErrorDescriptions = Translate("Position Error");
      return;
    }
    if (i_int_ErrorCode == 28)
    {
      o_str_ErrorDescriptions = Translate("Unexpected cLLD Error");
      return;
    }
    if (i_int_ErrorCode == 29)
    {
      o_str_ErrorDescriptions = Translate("Area already occupied");
      return;
    }
    if (i_int_ErrorCode == 30)
    {
      o_str_ErrorDescriptions = Translate("Imposible to occupy Area");
      return;
    }
    if (i_int_ErrorCode == 31)
    {
      o_str_ErrorDescriptions = Translate("Anti drop control error");
      return;
    }
    if (i_int_ErrorCode == 99)
    {
      o_str_ErrorDescriptions = Translate("Slave Error");
      return;
    }
    if (i_int_ErrorCode == 100)
    {
      o_str_ErrorDescriptions = Translate("Wrong Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 101)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 102)
    {
      o_str_ErrorDescriptions = Translate("Liquid Level Error");
      return;
    }
    if (i_int_ErrorCode == 103)
    {
      o_str_ErrorDescriptions = Translate("Not Detected Error");
      return;
    }
    if (i_int_ErrorCode == 104)
    {
      o_str_ErrorDescriptions = Translate("Not Aspirated Error");
      return;
    }
    if (i_int_ErrorCode == 105)
    {
      o_str_ErrorDescriptions = Translate("Improper Dispensation Error");
      return;
    }
    if (i_int_ErrorCode == 106)
    {
      o_str_ErrorDescriptions = Translate("No Labware Error");
      return;
    }
    if (i_int_ErrorCode == 107)
    {
      o_str_ErrorDescriptions = Translate("Unexpected Labware Error");
      return;
    }
    if (i_int_ErrorCode == 108)
    {
      o_str_ErrorDescriptions = Translate("Wrong Labware Error");
      return;
    }
    if (i_int_ErrorCode == 109)
    {
      o_str_ErrorDescriptions = Translate("Barcode Mask Error");
      return;
    }
    if (i_int_ErrorCode == 110)
    {
      o_str_ErrorDescriptions = Translate("Barcode Not Unique Error");
      return;
    }
    if (i_int_ErrorCode == 111)
    {
      o_str_ErrorDescriptions = Translate("Barcode Already Used Error");
      return;
    }
    if (i_int_ErrorCode == 112)
    {
      o_str_ErrorDescriptions = Translate("Kit Lot Expired Error");
      return;
    }
    if (i_int_ErrorCode == 113)
    {
      o_str_ErrorDescriptions = Translate("Delimiter Error");
      return;
    }
  }

  private function _Disp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void {
    o_str_ErrorDescriptions = 0;
    o_str_ErrorDescriptions = Translate("");
    if (i_int_ErrorCode == 0)
    {
      o_str_ErrorDescriptions = Translate("No Error");
      return;
    }
    if (i_int_ErrorCode == 1)
    {
      o_str_ErrorDescriptions = Translate("Syntax Error");
      return;
    }
    if (i_int_ErrorCode == 2)
    {
      o_str_ErrorDescriptions = Translate("Hardware Error");
      return;
    }
    if (i_int_ErrorCode == 3)
    {
      o_str_ErrorDescriptions = Translate("Not Executed Error");
      return;
    }
    if (i_int_ErrorCode == 4)
    {
      o_str_ErrorDescriptions = Translate("Clot Error");
      return;
    }
    if (i_int_ErrorCode == 5)
    {
      o_str_ErrorDescriptions = Translate("Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 6)
    {
      o_str_ErrorDescriptions = Translate("Insufficient Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 7)
    {
      o_str_ErrorDescriptions = Translate("Tip Present Error");
      return;
    }
    if (i_int_ErrorCode == 8)
    {
      o_str_ErrorDescriptions = Translate("No Tip Error");
      return;
    }
    if (i_int_ErrorCode == 9)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 10)
    {
      o_str_ErrorDescriptions = Translate("Execution Error");
      return;
    }
    if (i_int_ErrorCode == 11)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 12)
    {
      o_str_ErrorDescriptions = Translate("Calibrate Error");
      return;
    }
    if (i_int_ErrorCode == 13)
    {
      o_str_ErrorDescriptions = Translate("Unload Error");
      return;
    }
    if (i_int_ErrorCode == 14)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 15)
    {
      o_str_ErrorDescriptions = Translate("Parameter Error");
      return;
    }
    if (i_int_ErrorCode == 16)
    {
      o_str_ErrorDescriptions = Translate("Cover Open Error");
      return;
    }
    if (i_int_ErrorCode == 17)
    {
      o_str_ErrorDescriptions = Translate("Improper Dispense Error");
      return;
    }
    if (i_int_ErrorCode == 18)
    {
      o_str_ErrorDescriptions = Translate("Wash Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 19)
    {
      o_str_ErrorDescriptions = Translate("Temperature Error");
      return;
    }
    if (i_int_ErrorCode == 20)
    {
      o_str_ErrorDescriptions = Translate("TADM overshot");
      return;
    }
    if (i_int_ErrorCode == 21)
    {
      o_str_ErrorDescriptions = Translate("Labware Error");
      return;
    }
    if (i_int_ErrorCode == 22)
    {
      o_str_ErrorDescriptions = Translate("Labware Gripped Error");
      return;
    }
    if (i_int_ErrorCode == 23)
    {
      o_str_ErrorDescriptions = Translate("Labware Lost Error");
      return;
    }
    if (i_int_ErrorCode == 24)
    {
      o_str_ErrorDescriptions = Translate("Illegal target plate position");
      return;
    }
    if (i_int_ErrorCode == 25)
    {
      o_str_ErrorDescriptions = Translate("Illegal Intervention Error");
      return;
    }
    if (i_int_ErrorCode == 26)
    {
      o_str_ErrorDescriptions = Translate("TADM undershot");
      return;
    }
    if (i_int_ErrorCode == 27)
    {
      o_str_ErrorDescriptions = Translate("Position Error");
      return;
    }
    if (i_int_ErrorCode == 28)
    {
      o_str_ErrorDescriptions = Translate("Unexpected cLLD Error");
      return;
    }
    if (i_int_ErrorCode == 29)
    {
      o_str_ErrorDescriptions = Translate("Area already occupied");
      return;
    }
    if (i_int_ErrorCode == 30)
    {
      o_str_ErrorDescriptions = Translate("Imposible to occupy Area");
      return;
    }
    if (i_int_ErrorCode == 31)
    {
      o_str_ErrorDescriptions = Translate("Anti drop control error");
      return;
    }
    if (i_int_ErrorCode == 99)
    {
      o_str_ErrorDescriptions = Translate("Slave Error");
      return;
    }
    if (i_int_ErrorCode == 100)
    {
      o_str_ErrorDescriptions = Translate("Wrong Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 101)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 102)
    {
      o_str_ErrorDescriptions = Translate("Liquid Level Error");
      return;
    }
    if (i_int_ErrorCode == 103)
    {
      o_str_ErrorDescriptions = Translate("Not Detected Error");
      return;
    }
    if (i_int_ErrorCode == 104)
    {
      o_str_ErrorDescriptions = Translate("Not Aspirated Error");
      return;
    }
    if (i_int_ErrorCode == 105)
    {
      o_str_ErrorDescriptions = Translate("Improper Dispensation Error");
      return;
    }
    if (i_int_ErrorCode == 106)
    {
      o_str_ErrorDescriptions = Translate("No Labware Error");
      return;
    }
    if (i_int_ErrorCode == 107)
    {
      o_str_ErrorDescriptions = Translate("Unexpected Labware Error");
      return;
    }
    if (i_int_ErrorCode == 108)
    {
      o_str_ErrorDescriptions = Translate("Wrong Labware Error");
      return;
    }
    if (i_int_ErrorCode == 109)
    {
      o_str_ErrorDescriptions = Translate("Barcode Mask Error");
      return;
    }
    if (i_int_ErrorCode == 110)
    {
      o_str_ErrorDescriptions = Translate("Barcode Not Unique Error");
      return;
    }
    if (i_int_ErrorCode == 111)
    {
      o_str_ErrorDescriptions = Translate("Barcode Already Used Error");
      return;
    }
    if (i_int_ErrorCode == 112)
    {
      o_str_ErrorDescriptions = Translate("Kit Lot Expired Error");
      return;
    }
    if (i_int_ErrorCode == 113)
    {
      o_str_ErrorDescriptions = Translate("Delimiter Error");
      return;
    }
  }

  function FILE_UpdateTransferReportChannels( device & Instrument, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidLevelReturnValue, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void {
    if( 0 == t_eventWaitForParallel.WaitEvent(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
    }
    if(t_intForkID != 0) Join(t_intForkID,hslInfinite);
    t_intForkID = 0;
    t_blnMPH96 = ASWGLOBAL::BOOL::FALSE;
    t_strReportPath = t_strTrackingFilePath;
    t_strAspReturnValue = i_str_AspReturnValue;
    t_strDispReturnValue = i_str_DispReturnValue;
    t_strLiquidLevelReturn = i_str_LiquidLevelReturnValue;
    t_strLiquidClass = i_str_LiquidClass;
    t_blnShowSampleReport = i_bln_ShowSampleReport;
    t_blnShowReagentReport = i_bln_ShowReagentReport;
    t_strNameForTransfer = i_str_NameForTransfer;
    t_strDeckLayoutFile = DevGetDeckLayoutFileName(Instrument);
    t_intForkID = Fork("_ReportStarter");
  }

  private function _Recovery_Codes( variable i_int_RecoveryUsed, variable & o_str_RecoveryUsed ) void {
    o_str_RecoveryUsed = 0;
    if (i_int_RecoveryUsed == 0)
    {
      o_str_RecoveryUsed = Translate("None");
      return;
    }
    if (i_int_RecoveryUsed == 1)
    {
      o_str_RecoveryUsed = Translate("Abort");
      return;
    }
    if (i_int_RecoveryUsed == 2)
    {
      o_str_RecoveryUsed = Translate("Cancel");
      return;
    }
    if (i_int_RecoveryUsed == 3)
    {
      o_str_RecoveryUsed = Translate("Initialize");
      return;
    }
    if (i_int_RecoveryUsed == 4)
    {
      o_str_RecoveryUsed = Translate("Repeat");
      return;
    }
    if (i_int_RecoveryUsed == 5)
    {
      o_str_RecoveryUsed = Translate("Exclude");
      return;
    }
    if (i_int_RecoveryUsed == 6)
    {
      o_str_RecoveryUsed = Translate("Waste");
      return;
    }
    if (i_int_RecoveryUsed == 7)
    {
      o_str_RecoveryUsed = Translate("Air");
      return;
    }
    if (i_int_RecoveryUsed == 8)
    {
      o_str_RecoveryUsed = Translate("Bottom");
      return;
    }
    if (i_int_RecoveryUsed == 9)
    {
      o_str_RecoveryUsed = Translate("Continue");
      return;
    }
    if (i_int_RecoveryUsed == 10)
    {
      o_str_RecoveryUsed = Translate("Barcode");
      return;
    }
    if (i_int_RecoveryUsed == 11)
    {
      o_str_RecoveryUsed = Translate("Next");
      return;
    }
    if (i_int_RecoveryUsed == 12)
    {
      o_str_RecoveryUsed = Translate("Available");
      return;
    }
    if (i_int_RecoveryUsed == 13)
    {
      o_str_RecoveryUsed = Translate("Refill");
      return;
    }
  }

  private function _Report( device & Instrument, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidLevelReturnValue, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void {
    private variable xls_PosID;
    private variable xls_PosID_asp;
    private variable xls_BC_Rack_Asp;
    private variable l_fltLLHeightMinusBottom;
    private variable xls_Recov_asp;
    private variable xls_BC_Cont_Asp;
    private variable xls_BC_Cont_Disp;
    private variable l_blnEnableAsp;
    private variable xls_LabID_asp;
    private variable xls_BC_Rack_Disp;
    private variable xls_Status;
    private variable l_blnEnableDisp;
    private variable xls_chan_use;
    private variable l_fltZCoord;
    private variable xls_Status_asp;
    private variable l_intReturnPosition;
    private variable l_fltYCoord;
    private variable l_blnEnableLiquid;
    private variable l_fltXCoord;
    private variable xls_vol_disp;
    private variable l_intIndex;
    private variable l_intLoopNumber;
    private variable xls_Recov;
    private variable xls_Recov_disp;
    private variable xls_vol;
    private variable l_blnSimMode;
    private variable xls_LabID_disp;
    private variable l_intNumPosDisp;
    private variable l_fltLLHeight;
    private variable xls_LabID;
    private variable l_intDeckID;
    private variable xls_vol_detected;
    private variable xls_PipetteDirection;
    private variable l_fltACoord;
    private variable l_strAccessName;
    private variable l_intNumPosAsp;
    private variable xls_Status_disp;
    private variable xls_vol_asp;
    private variable xls_Time;
    private variable l_intLength;
    private variable xls_PosID_disp;
    private variable l_intNumPosLiquid;
    private variable l_intElementID;
    private variable xls_Date;
    private file writeReagentFile;
    private file writeSampleFile;
    private file writeErrorFile;
    private file writeReportFile;
    private variable l_blnLabwareValid;
    l_intDeckID = VectorDb_Deck::GetDeckID2(Instrument);
    l_blnSimMode = Util::GetSimulationMode();
    xls_Date = TimGetFormattedDate(Translate("%m/%d/%Y"));
    xls_Time = TimGetFormattedTime(Translate("%H:%M"));
    writeSampleFile.AddField("Date", xls_Date, hslString, 255);
    writeSampleFile.AddField("Time", xls_Time, hslString, 255);
    writeSampleFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeSampleFile.AddField("Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeSampleFile.AddField("Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeSampleFile.AddField("LabID", xls_LabID_asp, hslString, 255);
    writeSampleFile.AddField("PosID", xls_PosID_asp, hslString, 255);
    writeSampleFile.AddField("Volume Removed uL", xls_vol_asp, hslString, 255);
    writeSampleFile.AddField("Voume Detected uL", xls_vol_detected, hslString, 255);
    writeSampleFile.AddField("Error", xls_Status_asp, hslString, 255);
    writeSampleFile.AddField("Recovery", xls_Recov_asp, hslString, 255);
    if( 0 == writeSampleFile.Open(t_strReportPath + " " + "Sample", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strReportPath, "HxMetEdCompCmd");
    }
    writeReagentFile.AddField("Date", xls_Date, hslString, 255);
    writeReagentFile.AddField("Time", xls_Time, hslString, 255);
    writeReagentFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReagentFile.AddField("LabID", xls_LabID_asp, hslString, 255);
    writeReagentFile.AddField("PosID", xls_PosID_asp, hslString, 255);
    writeReagentFile.AddField("Volume Removed uL", xls_vol_asp, hslString, 255);
    writeReagentFile.AddField("Voume Detected uL", xls_vol_detected, hslString, 255);
    writeReagentFile.AddField("Error", xls_Status_asp, hslString, 255);
    writeReagentFile.AddField("Recovery", xls_Recov_asp, hslString, 255);
    if( 0 == writeReagentFile.Open(t_strReportPath + " " + "Reagent", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strReportPath, "HxMetEdCompCmd");
    }
    writeErrorFile.AddField("Date", xls_Date, hslString, 255);
    writeErrorFile.AddField("Time", xls_Time, hslString, 255);
    writeErrorFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeErrorFile.AddField("Pipetting Direction", xls_PipetteDirection, hslString, 255);
    writeErrorFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeErrorFile.AddField("Volume", xls_vol, hslString, 255);
    writeErrorFile.AddField("LabID", xls_LabID, hslString, 255);
    writeErrorFile.AddField("PosID", xls_PosID, hslString, 255);
    writeErrorFile.AddField("Error", xls_Status, hslString, 255);
    writeErrorFile.AddField("Recovery", xls_Recov, hslString, 255);
    if( 0 == writeErrorFile.Open(t_strReportPath + " " + "Error_Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strReportPath, "HxMetEdCompCmd");
    }
    writeReportFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
    writeReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
    writeReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
    writeReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
    writeReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
    writeReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
    writeReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
    writeReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
    writeReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
    writeReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
    writeReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
    writeReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
    writeReportFile.AddField("Liquid Class", i_str_LiquidClass, hslString, 255);
    if( 0 == writeReportFile.Open(t_strReportPath + " " + "Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strReportPath, "HxMetEdCompCmd");
    }
    l_blnEnableAsp = ASWGLOBAL::BOOL::FALSE;
    l_blnEnableDisp = ASWGLOBAL::BOOL::FALSE;
    l_blnEnableLiquid = ASWGLOBAL::BOOL::FALSE;
    l_intNumPosAsp = StepReturn::GetNumberOfPositions(i_str_AspReturnValue);
    l_intNumPosDisp = StepReturn::GetNumberOfPositions(i_str_DispReturnValue);
    l_intNumPosLiquid = StepReturn::GetNumberOfPositions(i_str_LiquidLevelReturnValue);
    TrcTrace(Translate("Num Asp Positions: "), l_intNumPosAsp);
    TrcTrace(Translate("Num Disp Positions: "), l_intNumPosDisp);
    TrcTrace(Translate("Num Liquid Level Positions: "), l_intNumPosLiquid);
    l_intLoopNumber = 0;
    if (l_intNumPosAsp > 0)
    {
      if (l_intNumPosAsp > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosAsp;
      }
      l_blnEnableAsp = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_intNumPosDisp > 0)
    {
      if (l_intNumPosDisp > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosDisp;
      }
      l_blnEnableDisp = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_intNumPosLiquid > 0)
    {
      if (l_intNumPosLiquid > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosLiquid;
      }
      l_blnEnableLiquid = ASWGLOBAL::BOOL::TRUE;
    }
    {
      for(l_intIndex = 0; l_intIndex < l_intLoopNumber;)
      {
        l_intIndex = l_intIndex + 1;
        xls_chan_use = Translate("-----");
        xls_BC_Rack_Asp = Translate("-----");
        xls_BC_Cont_Asp = Translate("-----");
        xls_LabID_asp = Translate("-----");
        xls_PosID_asp = Translate("-----");
        xls_vol_asp = Translate("-----");
        xls_Status_asp = Translate("-----");
        xls_Recov_asp = Translate("-----");
        xls_BC_Rack_Disp = Translate("-----");
        xls_BC_Cont_Disp = Translate("-----");
        xls_LabID_disp = Translate("-----");
        xls_PosID_disp = Translate("-----");
        xls_vol_disp = Translate("-----");
        xls_Status_disp = Translate("-----");
        xls_Recov_disp = Translate("-----");
        xls_vol_detected = Translate("-----");
        xls_PipetteDirection = Translate("-----");
        if (l_blnEnableAsp == ASWGLOBAL::BOOL::TRUE)
        {
          l_intReturnPosition = StepReturn::GetPositionFromNum(l_intIndex, i_str_AspReturnValue);
          xls_LabID_asp = StepReturn::GetLabwareId(l_intReturnPosition, i_str_AspReturnValue);
          l_intLength = StrGetLength(xls_LabID_asp);
          if (l_intLength > 0)
          {
            xls_PosID_asp = StepReturn::GetPositionId(l_intReturnPosition, i_str_AspReturnValue);
            xls_vol_asp = StepReturn::GetStepData(l_intReturnPosition, i_str_AspReturnValue);
            xls_chan_use = StepReturn::GetPosition(l_intReturnPosition, i_str_AspReturnValue);
            xls_Status_asp = StepReturn::GetMainError(l_intReturnPosition, i_str_AspReturnValue);
            xls_Recov_asp = StepReturn::GetRecoveryButton(l_intReturnPosition, i_str_AspReturnValue);
            l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_asp);
            l_strAccessName = VectorDb_Labware::GetLabwareAccessName(l_intElementID);
            l_strAccessName = StrConcat4(l_strAccessName, Translate("\\"), xls_PosID_asp, Translate(""));
            xls_BC_Rack_Asp = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
            xls_BC_Cont_Asp = VectorDb_Labware::GetLabwareBarcode(l_strAccessName);
            l_intLength = StrGetLength(xls_BC_Rack_Asp);
            if (l_intLength == 0)
            {
              xls_BC_Rack_Asp = Translate("-----");
            }
            l_intLength = StrGetLength(xls_BC_Cont_Asp);
            if (l_intLength == 0)
            {
              xls_BC_Cont_Asp = Translate("-----");
            }
            _Asp_Error_Codes(xls_Status_asp, xls_Status_asp);
            _Recovery_Codes(xls_Recov_asp, xls_Recov_asp);
            if (xls_Status_asp != "No Error")
            {
              xls_PipetteDirection = Translate("ASP");
              xls_LabID = xls_LabID_asp;
              xls_PosID = xls_PosID_asp;
              xls_Status = xls_Status_asp;
              xls_Recov = xls_Recov_asp;
              xls_vol = xls_vol_asp;
              if( 0 == writeErrorFile.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          else
          {
            xls_LabID_asp = Translate("-----");
          }
        }
        if (l_blnEnableDisp == ASWGLOBAL::BOOL::TRUE)
        {
          l_intReturnPosition = StepReturn::GetPositionFromNum(l_intIndex, i_str_DispReturnValue);
          xls_LabID_disp = StepReturn::GetLabwareId(l_intReturnPosition, i_str_DispReturnValue);
          l_intLength = StrGetLength(xls_LabID_disp);
          if (l_intLength > 0)
          {
            xls_PosID_disp = StepReturn::GetPositionId(l_intReturnPosition, i_str_DispReturnValue);
            xls_chan_use = StepReturn::GetPosition(l_intReturnPosition, i_str_DispReturnValue);
            xls_vol_disp = StepReturn::GetStepData(l_intReturnPosition, i_str_DispReturnValue);
            xls_Status_disp = StepReturn::GetMainError(l_intReturnPosition, i_str_DispReturnValue);
            xls_Recov_disp = StepReturn::GetRecoveryButton(l_intReturnPosition, i_str_DispReturnValue);
            l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_disp);
            l_strAccessName = VectorDb_Labware::GetLabwareAccessName(l_intElementID);
            l_strAccessName = StrConcat4(l_strAccessName, Translate("\\"), xls_PosID_disp, Translate(""));
            xls_BC_Rack_Disp = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
            xls_BC_Cont_Disp = VectorDb_Labware::GetLabwareBarcode(l_strAccessName);
            l_intLength = StrGetLength(xls_BC_Rack_Disp);
            if (l_intLength == 0)
            {
              xls_BC_Rack_Disp = Translate("-----");
            }
            l_intLength = StrGetLength(xls_BC_Cont_Disp);
            if (l_intLength == 0)
            {
              xls_BC_Cont_Disp = Translate("-----");
            }
            _Disp_Error_Codes(xls_Status_disp, xls_Status_disp);
            _Recovery_Codes(xls_Recov_disp, xls_Recov_disp);
            if (xls_Status_disp != "No Error")
            {
              xls_PipetteDirection = Translate("DISP");
              xls_LabID = xls_LabID_disp;
              xls_PosID = xls_PosID_disp;
              xls_Status = xls_Status_disp;
              xls_Recov = xls_Recov_disp;
              xls_vol = xls_vol_disp;
              if( 0 == writeErrorFile.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          else
          {
            xls_LabID_disp = Translate("-----");
          }
        }
        if (l_blnEnableLiquid == ASWGLOBAL::BOOL::TRUE)
        {
          l_intReturnPosition = StepReturn::GetPositionFromNum(l_intIndex, i_str_LiquidLevelReturnValue);
          l_fltLLHeight = StepReturn::GetLastLiquidLevel(l_intReturnPosition, i_str_LiquidLevelReturnValue);
          if (l_blnEnableAsp == ASWGLOBAL::BOOL::TRUE)
          {
            l_blnLabwareValid = DevIsValidLabwareForCurrentDeckLayout(Instrument, xls_LabID_asp);
            if (l_blnLabwareValid == ASWGLOBAL::BOOL::TRUE)
            {
              DevGetLabwarePositionEx(Instrument, xls_LabID_asp, xls_PosID_asp, l_fltXCoord, l_fltYCoord, l_fltZCoord, l_fltACoord);
              if (l_blnSimMode == ASWGLOBAL::BOOL::TRUE)
              {
                l_fltLLHeight = l_fltZCoord + 5.0;
              }
              l_fltLLHeightMinusBottom = l_fltLLHeight - l_fltZCoord;
              if (l_fltLLHeightMinusBottom < 0.0)
              {
                l_fltLLHeightMinusBottom = 0.0;
              }
              xls_vol_detected = DevComputeContainerVolume2(Instrument, xls_LabID_asp, xls_PosID_asp, l_fltLLHeightMinusBottom, 0, 0);
              xls_vol_detected = xls_vol_detected * 1000.0;
              xls_vol_detected = StrConcat2(xls_vol_detected, Translate(""));
            }
          }
        }
        {
             if(l_blnEnableAsp != hslFalse && i_bln_ShowSampleReport == hslTrue) writeSampleFile.WriteRecord();
             if(l_blnEnableAsp != hslFalse && i_bln_ShowReagentReport == hslTrue) writeReagentFile.WriteRecord();
             //if(l_blnEnableAsp != hslFalse && l_blnEnableDisp != hslFalse)
             writeReportFile.WriteRecord();
        }
      }
    }
    if( 0 != writeErrorFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeErrorFile.RemoveFields();
    if( 0 != writeReagentFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReagentFile.RemoveFields();
    if( 0 != writeSampleFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeSampleFile.RemoveFields();
    if( 0 != writeReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReportFile.RemoveFields();
  }

  private function _VersionHistory(  ) void {
  }

  private function _ReportMPH96( device & Instrument, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_PickupReturnValue3, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void {
    private variable xls_BC_Rack_Asp;
    private variable xls_PosID_asp;
    private variable xls_PosID;
    private variable l_fltLLHeightMinusBottom;
    private variable xls_BC_Cont_Asp;
    private variable xls_Recov_asp;
    private variable l_blnEnableAsp;
    private variable xls_BC_Rack_Disp;
    private variable xls_LabID_asp;
    private variable xls_BC_Cont_Disp;
    private variable l_blnEnableDisp;
    private variable xls_Status;
    private variable xls_chan_use;
    private variable xls_Status_asp;
    private variable l_intReturnPosition;
    private variable l_blnEnableLiquid;
    private variable xls_vol_disp;
    private variable l_intIndex;
    private variable l_intLoopNumber;
    private variable l_blnSimMode;
    private variable xls_Recov;
    private variable xls_vol;
    private variable xls_Recov_disp;
    private variable xls_LabID_disp;
    private variable l_intNumPosDisp;
    private variable l_strPosIDStart;
    private variable l_blnContainerConnected;
    private variable xls_LabID;
    private variable l_strPosIDEnd;
    private variable l_intDeckID;
    private variable xls_vol_detected;
    private variable xls_PipetteDirection;
    private variable l_intNumPosAsp;
    private variable xls_Status_disp;
    private variable l_strAccessName;
    private variable xls_vol_asp;
    private variable l_strChanEnd;
    private variable l_strChanStart;
    private variable xls_Time;
    private variable l_intLength;
    private variable l_intNumPosLiquid;
    private variable xls_Date;
    private variable l_intElementID;
    private variable xls_PosID_disp;
    private sequence l_seqTemp;
    private file writeReagentFile;
    private file writeSampleFile;
    private file writeErrorFile;
    private file writeReportFile;
    private variable l_intTotal;
    xls_chan_use = Translate("-----");
    xls_BC_Rack_Asp = Translate("-----");
    xls_BC_Cont_Asp = Translate("-----");
    xls_LabID_asp = Translate("-----");
    xls_PosID_asp = Translate("-----");
    xls_vol_asp = Translate("-----");
    xls_Status_asp = Translate("-----");
    xls_Recov_asp = Translate("-----");
    xls_BC_Rack_Disp = Translate("-----");
    xls_BC_Cont_Disp = Translate("-----");
    xls_LabID_disp = Translate("-----");
    xls_PosID_disp = Translate("-----");
    xls_vol_disp = Translate("-----");
    xls_Status_disp = Translate("-----");
    xls_Recov_disp = Translate("-----");
    xls_vol_detected = Translate("-----");
    xls_PipetteDirection = Translate("-----");
    l_intDeckID = VectorDb_Deck::GetDeckID2(Instrument);
    l_blnSimMode = Util::GetSimulationMode();
    xls_Date = TimGetFormattedDate(Translate("%m/%d/%Y"));
    xls_Time = TimGetFormattedTime(Translate("%H:%M"));
    writeSampleFile.AddField("Date", xls_Date, hslString, 255);
    writeSampleFile.AddField("Time", xls_Time, hslString, 255);
    writeSampleFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeSampleFile.AddField("Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeSampleFile.AddField("Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeSampleFile.AddField("LabID", xls_LabID_asp, hslString, 255);
    writeSampleFile.AddField("PosID", xls_PosID_asp, hslString, 255);
    writeSampleFile.AddField("Volume Removed uL", xls_vol_asp, hslString, 255);
    writeSampleFile.AddField("Voume Detected uL", xls_vol_detected, hslString, 255);
    writeSampleFile.AddField("Error", xls_Status_asp, hslString, 255);
    writeSampleFile.AddField("Recovery", xls_Recov_asp, hslString, 255);
    if( 0 == writeSampleFile.Open(t_strReportPath + " " + "Sample", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strReportPath, "HxMetEdCompCmd");
    }
    writeReagentFile.AddField("Date", xls_Date, hslString, 255);
    writeReagentFile.AddField("Time", xls_Time, hslString, 255);
    writeReagentFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReagentFile.AddField("LabID", xls_LabID_asp, hslString, 255);
    writeReagentFile.AddField("PosID", xls_PosID_asp, hslString, 255);
    writeReagentFile.AddField("Volume Removed uL", xls_vol_asp, hslString, 255);
    writeReagentFile.AddField("Voume Detected uL", xls_vol_detected, hslString, 255);
    writeReagentFile.AddField("Error", xls_Status_asp, hslString, 255);
    writeReagentFile.AddField("Recovery", xls_Recov_asp, hslString, 255);
    if( 0 == writeReagentFile.Open(t_strReportPath + " " + "Reagent", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strReportPath, "HxMetEdCompCmd");
    }
    writeErrorFile.AddField("Date", xls_Date, hslString, 255);
    writeErrorFile.AddField("Time", xls_Time, hslString, 255);
    writeErrorFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeErrorFile.AddField("Pipetting Direction", xls_PipetteDirection, hslString, 255);
    writeErrorFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeErrorFile.AddField("Volume", xls_vol, hslString, 255);
    writeErrorFile.AddField("LabID", xls_LabID, hslString, 255);
    writeErrorFile.AddField("PosID", xls_PosID, hslString, 255);
    writeErrorFile.AddField("Error", xls_Status, hslString, 255);
    writeErrorFile.AddField("Recovery", xls_Recov, hslString, 255);
    if( 0 == writeErrorFile.Open(t_strReportPath + " " + "Error_Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strReportPath, "HxMetEdCompCmd");
    }
    writeReportFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
    writeReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
    writeReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
    writeReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
    writeReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
    writeReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
    writeReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
    writeReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
    writeReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
    writeReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
    writeReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
    writeReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
    writeReportFile.AddField("Liquid Class", i_str_LiquidClass, hslString, 255);
    if( 0 == writeReportFile.Open(t_strReportPath + " " + "Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strReportPath, "HxMetEdCompCmd");
    }
    l_blnEnableAsp = ASWGLOBAL::BOOL::FALSE;
    l_blnEnableDisp = ASWGLOBAL::BOOL::FALSE;
    l_blnEnableLiquid = ASWGLOBAL::BOOL::FALSE;
    l_intNumPosAsp = StepReturn::GetNumberOfPositions(i_str_AspReturnValue4);
    l_intNumPosDisp = StepReturn::GetNumberOfPositions(i_str_DispReturnValue4);
    l_intNumPosLiquid = StepReturn::GetNumberOfPositions(i_str_PickupReturnValue3);
    l_intLoopNumber = 0;
    if (l_intNumPosAsp > 0)
    {
      if (l_intNumPosAsp > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosAsp;
      }
      l_blnEnableAsp = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_intNumPosDisp > 0)
    {
      if (l_intNumPosDisp > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosDisp;
      }
      l_blnEnableDisp = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_intNumPosLiquid > 0)
    {
      if (l_intNumPosLiquid > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosLiquid;
      }
      l_blnEnableLiquid = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_blnEnableAsp == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReturnPosition = 1;
      xls_LabID_asp = StepReturn::GetLabwareId(l_intReturnPosition, i_str_AspReturnValue3);
      l_intLength = StrGetLength(xls_LabID_asp);
      if (l_intLength > 0)
      {
        xls_vol_asp = StepReturn::GetStepData(l_intReturnPosition, i_str_AspReturnValue3);
        xls_Status_asp = StepReturn::GetMainError(l_intReturnPosition, i_str_AspReturnValue3);
        xls_Recov_asp = StepReturn::GetRecoveryButton(l_intReturnPosition, i_str_AspReturnValue3);
        l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_asp);
        xls_BC_Rack_Asp = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
        l_intLength = StrGetLength(xls_BC_Rack_Asp);
        if (l_intLength == 0)
        {
          xls_BC_Rack_Asp = Translate("-----");
        }
        _Asp_Error_Codes(xls_Status_asp, xls_Status_asp);
        _Recovery_Codes(xls_Recov_asp, xls_Recov_asp);
      }
      else
      {
        xls_LabID_asp = Translate("-----");
      }
    }
    if (l_blnEnableDisp == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReturnPosition = 1;
      xls_LabID_disp = StepReturn::GetLabwareId(l_intReturnPosition, i_str_DispReturnValue3);
      l_intLength = StrGetLength(xls_LabID_disp);
      if (l_intLength > 0)
      {
        xls_vol_disp = StepReturn::GetStepData(l_intReturnPosition, i_str_DispReturnValue3);
        xls_Status_disp = StepReturn::GetMainError(l_intReturnPosition, i_str_DispReturnValue3);
        xls_Recov_disp = StepReturn::GetRecoveryButton(l_intReturnPosition, i_str_DispReturnValue3);
        l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_disp);
        xls_BC_Rack_Disp = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
        l_intLength = StrGetLength(xls_BC_Rack_Disp);
        if (l_intLength == 0)
        {
          xls_BC_Rack_Disp = Translate("-----");
        }
        l_intLength = StrGetLength(xls_BC_Cont_Disp);
        if (l_intLength == 0)
        {
          xls_BC_Cont_Disp = Translate("-----");
        }
        _Disp_Error_Codes(xls_Status_disp, xls_Status_disp);
        _Recovery_Codes(xls_Recov_disp, xls_Recov_disp);
      }
      else
      {
        xls_LabID_disp = Translate("-----");
      }
    }
    if (l_blnEnableLiquid == ASWGLOBAL::BOOL::TRUE)
    {
      STAR_MPH96_TOOLS::TOOL_GetLiquidLevelHeight(Instrument, i_str_PickupReturnValue3, i_str_AspReturnValue3, l_fltLLHeightMinusBottom);
      if (l_blnEnableAsp == ASWGLOBAL::BOOL::TRUE)
      {
        if (l_blnSimMode == ASWGLOBAL::BOOL::TRUE)
        {
          l_fltLLHeightMinusBottom = l_fltLLHeightMinusBottom + 5.0;
        }
        if (l_fltLLHeightMinusBottom < 0.0)
        {
          l_fltLLHeightMinusBottom = 0.0;
        }
        SeqRemoveAll(l_seqTemp);
        SeqAdd(l_seqTemp, xls_LabID_asp, xls_PosID_asp);
        l_seqTemp.SetCurrentPosition(1);
        LPQ::LABWARE_IsContainersConnected(Instrument, l_seqTemp, l_blnContainerConnected);
        xls_vol_detected = DevComputeContainerVolume2(Instrument, xls_LabID_asp, xls_PosID_asp, l_fltLLHeightMinusBottom, 0, l_blnContainerConnected);
        xls_vol_detected = xls_vol_detected * 1000.0;
        xls_vol_detected = StrConcat2(xls_vol_detected, Translate(""));
      }
    }
    xls_chan_use = Translate("-----");
    xls_BC_Cont_Asp = Translate("-----");
    xls_PosID_asp = Translate("-----");
    xls_BC_Cont_Disp = Translate("-----");
    xls_PosID_disp = Translate("-----");
    if (l_blnEnableAsp == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReturnPosition = l_intIndex;
      l_intLength = StrGetLength(xls_LabID_asp);
      l_intTotal = StepReturn::GetNumberOfPositions(i_str_AspReturnValue4);
      if (l_intLength > 0)
      {
        l_strPosIDStart = StepReturn::GetBarcodePosition(1, i_str_AspReturnValue4);
        l_strPosIDEnd = StepReturn::GetBarcodePosition(l_intTotal, i_str_AspReturnValue4);
        xls_PosID_asp = StrConcat4(l_strPosIDStart, Translate(" - "), l_strPosIDEnd, Translate(""));
        l_strChanStart = StepReturn::GetPosition(1, i_str_AspReturnValue4);
        l_strChanEnd = StepReturn::GetPosition(l_intTotal, i_str_AspReturnValue4);
        xls_chan_use = StrConcat4(l_strChanStart, Translate(" - "), l_strChanEnd, Translate(""));
        l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_asp);
        l_strAccessName = VectorDb_Labware::GetLabwareAccessName(l_intElementID);
        l_strAccessName = StrConcat4(l_strAccessName, Translate("\\"), xls_PosID_asp, Translate(""));
        if(0){
          xls_BC_Cont_Asp = VectorDb_Labware::GetLabwareBarcode(l_strAccessName);
        }
        l_intLength = StrGetLength(xls_BC_Cont_Asp);
        if (l_intLength == 0)
        {
          xls_BC_Cont_Asp = Translate("-----");
        }
        if (xls_Status_asp != "No Error")
        {
          xls_PipetteDirection = Translate("ASP");
          xls_LabID = xls_LabID_asp;
          xls_PosID = xls_PosID_asp;
          xls_Status = xls_Status_asp;
          xls_Recov = xls_Recov_asp;
          xls_vol = xls_vol_asp;
          if( 0 == writeErrorFile.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      else
      {
        xls_LabID_asp = Translate("-----");
      }
    }
    if (l_blnEnableDisp == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReturnPosition = l_intIndex;
      l_intLength = StrGetLength(xls_LabID_disp);
      l_intTotal = StepReturn::GetNumberOfPositions(i_str_DispReturnValue4);
      if (l_intLength > 0)
      {
        l_strPosIDStart = StepReturn::GetBarcodePosition(1, i_str_DispReturnValue4);
        l_strPosIDEnd = StepReturn::GetBarcodePosition(l_intTotal, i_str_DispReturnValue4);
        xls_PosID_disp = StrConcat4(l_strPosIDStart, Translate(" - "), l_strPosIDEnd, Translate(""));
        l_strChanStart = StepReturn::GetPosition(1, i_str_DispReturnValue4);
        l_strChanEnd = StepReturn::GetPosition(l_intTotal, i_str_DispReturnValue4);
        xls_chan_use = StrConcat4(l_strChanStart, Translate(" - "), l_strChanEnd, Translate(""));
        l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_disp);
        l_strAccessName = VectorDb_Labware::GetLabwareAccessName(l_intElementID);
        l_strAccessName = StrConcat4(l_strAccessName, Translate("\\"), xls_PosID_disp, Translate(""));
        if(0){
          xls_BC_Cont_Disp = VectorDb_Labware::GetLabwareBarcode(l_strAccessName);
        }
        l_intLength = StrGetLength(xls_BC_Cont_Disp);
        if (l_intLength == 0)
        {
          xls_BC_Cont_Disp = Translate("-----");
        }
        if (xls_Status_disp != "No Error")
        {
          xls_PipetteDirection = Translate("DISP");
          xls_LabID = xls_LabID_disp;
          xls_PosID = xls_PosID_disp;
          xls_Status = xls_Status_disp;
          xls_Recov = xls_Recov_disp;
          xls_vol = xls_vol_disp;
          if( 0 == writeErrorFile.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      else
      {
        xls_LabID_disp = Translate("-----");
      }
    }
    {
         if(l_blnEnableAsp == hslTrue && i_bln_ShowSampleReport == hslTrue) writeSampleFile.WriteRecord();
         if(l_blnEnableAsp == hslTrue && i_bln_ShowReagentReport == hslTrue) writeReagentFile.WriteRecord();
         if(l_blnEnableAsp == hslTrue || l_blnEnableDisp == hslTrue) writeReportFile.WriteRecord();
    }
    if( 0 != writeErrorFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeErrorFile.RemoveFields();
    if( 0 != writeReagentFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReagentFile.RemoveFields();
    if( 0 != writeSampleFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeSampleFile.RemoveFields();
    if( 0 != writeReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReportFile.RemoveFields();
  }

  function _WaitForReport(  ) void {
    if(t_intForkID != 0) Join(t_intForkID,hslInfinite);
    t_intForkID = 0;
  }

  function FILE_UpdateTransferReportMPH( device & Instrument, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_TipPickUpValue3, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void {
    if( 0 == t_eventWaitForParallel.WaitEvent(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
    }
    if(t_intForkID != 0) Join(t_intForkID,hslInfinite);
    t_intForkID = 0;
    t_blnMPH96 = ASWGLOBAL::BOOL::TRUE;
    t_strReportPath = t_strTrackingFilePath;
    t_strAspReturnValue3 = i_str_AspReturnValue3;
    t_strDispReturnValue3 = i_str_DispReturnValue3;
    t_strAspReturnValue4 = i_str_AspReturnValue4;
    t_strDispReturnValue4 = i_str_DispReturnValue4;
    t_strTipPickUpReturn = i_str_TipPickUpValue3;
    t_strLiquidClass = i_str_LiquidClass;
    t_blnShowSampleReport = i_bln_ShowSampleReport;
    t_blnShowReagentReport = i_bln_ShowReagentReport;
    t_strNameForTransfer = i_str_NameForTransfer;
    t_strDeckLayoutFile = DevGetDeckLayoutFileName(Instrument);
    t_intForkID = Fork("_ReportStarter");
  }

  private function _ReportStarter(  ) void {
    {
      device ML_STAR("","",hslTrue);
      ML_STAR = GetDeviceRef(t_strDeckLayoutFile,"ML_STAR");
      if(!t_blnMPH96) _Report(ML_STAR,t_strAspReturnValue,t_strDispReturnValue,t_strLiquidLevelReturn,t_strLiquidClass,t_blnShowSampleReport,t_blnShowReagentReport,t_strNameForTransfer);
      if(t_blnMPH96) _ReportMPH96(ML_STAR,t_strAspReturnValue3,t_strAspReturnValue4,t_strDispReturnValue3,t_strDispReturnValue4,t_strTipPickUpReturn,t_strLiquidClass,t_blnShowSampleReport,t_blnShowReagentReport,t_strNameForTransfer);
    }
    if( 0 == t_eventWaitForParallel.SetEvent() )
    {
          MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }

  function DATA_CalculateMixVolume( variable i_fltTotalVolume, variable & o_fltMixVolume, variable i_intModule ) void {
    o_fltMixVolume = 0;
    if (i_intModule == 1)
    {
      i_fltTotalVolume = i_fltTotalVolume * 2;
      o_fltMixVolume = i_fltTotalVolume * 0.8;
    }
    else
    {
      o_fltMixVolume = i_fltTotalVolume * 0.8;
      if (o_fltMixVolume > 300)
      {
        o_fltMixVolume = 300.0;
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Mix Volume :: "), o_fltMixVolume);
  }
} // library namespace
