#pragma once
#include "Training\\BF4\\HslHamHeaterShakerLib.hsl"
#include "HSLUtilLib.hsl"
#include "Training\\BF4\\ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLJson\\HSLJson.hsl"
#include "HSLStrLib.hsl"
#include "Training\\BF4\\Hamilton DriverTools\\Hamilton DriverTools.hsl"
#include "Training\\BF4\\ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "Training\\BF4\\HSLMECCLib.hs_"
#include "Training\\BF4\\HSLPTLLib.hsl"

namespace HAMILTONHEATERSHAKERCONTROL {
  global variable g_strHHSConfigurationFile("C:\\Program Files (x86)\\HAMILTON\\Library\\Device Sub-method Libraries\\Hamilton\\HamiltonHeaterShaker\\Advanced\\1_0\\Configuration\\hhs.json");
  function Connect( device & io_MLSTAR, variable i_intHHS, variable i_blnHHSConnectionType ) variable ;
  function ConnectAllHHSs( device & io_MLSTAR, variable i_blnHHSConnectionType ) variable ;
  private function Disconnect(  ) variable ;
  function GetAvailableHHS( variable & o_intHHS ) variable ;
  private function GetErrorDescription( variable i_intError ) variable ;
  function GetHHSBarcode( variable i_intHHS, variable & o_strBarcode ) variable ;
  function GetHHSBarcodes( variable & o_arrBarcodes[] ) variable ;
  function GetHHSByBarcode( variable i_strBarcode, variable & o_intHHS ) variable ;
  function GetHHSDeviceID( variable i_intHHS, variable & o_intHHSDeviceID ) variable ;
  function GetHHSNodeID( variable i_intHHS, variable & o_intHHSNodeID ) variable ;
  function GetLastError( variable & o_strErrorDescription, variable & o_intLastReturn ) variable ;
  function GetTemperature( device & io_MLSTAR, variable i_intHHS, variable & o_fltTemperature ) variable ;
  function RampTemperature( variable i_intHHS, variable i_fltTemperature, variable i_fltSlowDownTemp ) variable ;
  function ReleaseHHS( variable i_intHHS ) variable ;
  function SetErrorHandling( variable i_blnErrorDialog ) variable ;
  function SetHHSBarcode( variable i_intHHS, variable i_strBarcode ) variable ;
  function SetHHSDeviceID( variable i_intHHS, variable i_intHHSDeviceID ) variable ;
  function SetPlateLock( device & io_MLSTAR, variable i_intHHS, variable i_blnHHSPlateLock ) variable ;
  function SetSimulation( device & io_MLSTAR, variable i_blnSimulation ) variable ;
  function ShakeStart( device & io_MLSTAR, variable i_intHHS, variable i_intHHSShakeSpeed ) variable ;
  function ShakeTimed( device & io_MLSTAR, variable i_intHHS, variable i_intHHSShakeSpeed, variable i_intHHSShakeTime, variable i_blnWaitForTime, variable i_blnStoppableTimer ) variable ;
  function StartTemperatureControl( device & io_MLSTAR, variable i_intHHS, variable i_fltTemperature, variable i_blnWaitForTemperature ) variable ;
  function StopShaker( device & io_MLSTAR, variable i_intHHS ) variable ;
  function StopTemperatureControl( device & io_MLSTAR, variable i_intHHS ) variable ;
  function TerminateAllHHSs( device & io_MLSTAR ) variable ;
  function WaitForShake( device & io_MLSTAR, variable i_intHHS ) variable ;
  function WaitForTemperatureControl( variable i_intHHS, variable i_fltTemperature, variable i_intTemperaturePollingFrequency ) variable ;
  function _README(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Connect( device & io_MLSTAR, variable i_intHHS, variable i_blnHHSConnectionType ) variable {
    private variable l_strCommand;
    private variable l_loopError;
    private variable l_intDialogOut;
    private variable l_intReturn;
    private variable l_intHHSNodeID;
    private variable l_intHHSDeviceID;
    private variable l_strErrorDescription;
    private dialog customDialog_1;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_blnErrorDialog;
    private variable l_intLastErrorReturn;
    private variable l_strDevice;
    l_strCommand = Translate("Connect");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("ErrorDialog"), l_blnErrorDialog);
    l_intJsonReturn = HSLJsonLib::SetBooleanProperty(l_objHHSs, Translate("HHSConnectionType"), i_blnHHSConnectionType);
    l_intReturn = GetHHSNodeID(i_intHHS, l_intHHSNodeID);
    l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHSs, Translate("LastErrorReturn"), 0);
    l_intHHSDeviceID = 0;
    l_intReturn = Hamilton_DriverTools::CheckBool(i_blnHHSConnectionType, Translate("i_blnHHSConnectionType"), l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_blnHHSConnectionType"), Translate(""));
      return (1);
    }
    if (i_blnHHSConnectionType == 0)
    {
      l_intReturn = HSLHamHeaterShaker::CreateUsbDevice(l_intHHSNodeID, l_intHHSDeviceID);
    }
    if (i_blnHHSConnectionType == 1)
    {
      l_intReturn = HSLHamHeaterShaker::CreateStarDevice(io_MLSTAR, l_intHHSNodeID, l_intHHSDeviceID);
    }
    {
      l_loopError = 0;
      while (l_intReturn > 0)
      {
        l_loopError = l_loopError + 1;
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHSs, Translate("LastErrorReturn"), l_intReturn);
        l_intLastErrorReturn = l_intReturn;
        if (l_blnErrorDialog == 1)
        {
          l_strErrorDescription = GetErrorDescription(l_intReturn);
          customDialog_1.InitCustomDialog("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");
          customDialog_1.SetCustomDialogProperty( "textBlock3.Text", l_strDevice );
          customDialog_1.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_1.SetCustomDialogProperty( "textBlock7.Text", l_strErrorDescription );
          customDialog_1.ShowCustomDialog();
          l_intDialogOut = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_intDialogOut = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Retry"));
          if (i_blnHHSConnectionType == 0)
          {
            l_intReturn = HSLHamHeaterShaker::CreateUsbDevice(l_intHHSNodeID, l_intHHSDeviceID);
          }
          if (i_blnHHSConnectionType == 1)
          {
            l_intReturn = HSLHamHeaterShaker::CreateStarDevice(io_MLSTAR, l_intHHSNodeID, l_intHHSDeviceID);
          }
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Reset and Retry"));
          HSLHamHeaterShaker::Terminate();
          if (i_blnHHSConnectionType == 0)
          {
            l_intReturn = HSLHamHeaterShaker::CreateUsbDevice(l_intHHSNodeID, l_intHHSDeviceID);
          }
          if (i_blnHHSConnectionType == 1)
          {
            l_intReturn = HSLHamHeaterShaker::CreateStarDevice(io_MLSTAR, l_intHHSNodeID, l_intHHSDeviceID);
          }
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Ignore"));
          return (0);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::CANCEL)
        {
          if (l_blnErrorDialog == 0)
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error"), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Cancel"));
          }
          return (l_intReturn);
        }
      }
    }
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    l_intReturn = SetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
    l_intReturn = SetPlateLock(io_MLSTAR, i_intHHS, 0);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  private function Disconnect(  ) variable {
    private variable l_strCommand;
    private variable l_strDevice;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    l_strCommand = Translate("Disconnect");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    HSLHamHeaterShaker::Terminate();
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function SetPlateLock( device & io_MLSTAR, variable i_intHHS, variable i_blnHHSPlateLock ) variable {
    private variable l_strCommand;
    private variable l_intDialogOut;
    private variable l_loopError;
    private variable l_intReturn;
    private variable l_strErrorDescription;
    private dialog customDialog_2;
    private variable l_intHHSDeviceID;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_blnHHSConnectionType;
    private variable l_strDevice;
    private variable l_blnErrorDialog;
    l_strCommand = Translate("Set Plate Lock");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("ErrorDialog"), l_blnErrorDialog);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("HHSConnectionType"), l_blnHHSConnectionType);
    l_intReturn = Hamilton_DriverTools::CheckBool(i_blnHHSPlateLock, Translate("i_blnHHSPlateLock"), l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_blnHHSPlateLock"), Translate(""));
      return (1);
    }
    l_intReturn = HSLHamHeaterShaker::SetPlateLock(i_intHHS, i_blnHHSPlateLock);
    {
      l_loopError = 0;
      while (l_intReturn > 0)
      {
        l_loopError = l_loopError + 1;
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHSs, Translate("LastErrorReturn"), l_intReturn);
        if (l_blnErrorDialog == 1)
        {
          l_strErrorDescription = GetErrorDescription(l_intReturn);
          customDialog_2.InitCustomDialog("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");
          customDialog_2.SetCustomDialogProperty( "textBlock3.Text", l_strDevice );
          customDialog_2.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_2.SetCustomDialogProperty( "textBlock7.Text", l_strErrorDescription );
          customDialog_2.ShowCustomDialog();
          l_intDialogOut = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_intDialogOut = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Retry"));
          l_intReturn = HSLHamHeaterShaker::SetPlateLock(i_intHHS, i_blnHHSPlateLock);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Reset and Retry"));
          l_intReturn = Disconnect();
          l_intReturn = Connect(io_MLSTAR, i_intHHS, l_blnHHSConnectionType);
          l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
          l_intReturn = HSLHamHeaterShaker::SetPlateLock(i_intHHS, i_blnHHSPlateLock);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Ignore"));
          return (0);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::CANCEL)
        {
          if (l_blnErrorDialog == 0)
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error"), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Cancel"));
          }
          return (l_intReturn);
        }
      }
    }
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function StartTemperatureControl( device & io_MLSTAR, variable i_intHHS, variable i_fltTemperature, variable i_blnWaitForTemperature ) variable {
    private variable l_strCommand;
    private variable l_intDialogOut;
    private variable l_loopError;
    private variable l_intReturn;
    private variable l_strErrorDescription;
    private dialog customDialog_3;
    private variable l_intHHSDeviceID;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_strDevice;
    private variable l_blnErrorDialog;
    private variable l_blnHHSConnectionType;
    l_strCommand = Translate("Start Temperature Control");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("ErrorDialog"), l_blnErrorDialog);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("HHSConnectionType"), l_blnHHSConnectionType);
    l_intReturn = Hamilton_DriverTools::CheckFloatRange(i_fltTemperature, Translate("i_fltTemperature"), 20.0, 105.0, l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_fltTemperature"), Translate(""));
      return (1);
    }
    l_intReturn = Hamilton_DriverTools::CheckBool(i_blnWaitForTemperature, Translate("i_blnWaitForTemperature"), l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_fltTemperature"), Translate(""));
      return (1);
    }
    l_intReturn = HSLHamHeaterShaker::StartTempCtrl(l_intHHSDeviceID, i_fltTemperature, i_blnWaitForTemperature);
    {
      l_loopError = 0;
      while (l_intReturn > 0)
      {
        l_loopError = l_loopError + 1;
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHSs, Translate("LastErrorReturn"), l_intReturn);
        if (l_blnErrorDialog == 1)
        {
          l_strErrorDescription = GetErrorDescription(l_intReturn);
          customDialog_3.InitCustomDialog("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");
          customDialog_3.SetCustomDialogProperty( "textBlock3.Text", l_strDevice );
          customDialog_3.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_3.SetCustomDialogProperty( "textBlock7.Text", l_strErrorDescription );
          customDialog_3.ShowCustomDialog();
          l_intDialogOut = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_intDialogOut = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Retry"));
          l_intReturn = HSLHamHeaterShaker::StartTempCtrl(l_intHHSDeviceID, i_fltTemperature, i_blnWaitForTemperature);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Reset and Retry"));
          l_intReturn = Disconnect();
          l_intReturn = Connect(io_MLSTAR, i_intHHS, l_blnHHSConnectionType);
          l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
          l_intReturn = HSLHamHeaterShaker::StartTempCtrl(l_intHHSDeviceID, i_fltTemperature, i_blnWaitForTemperature);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Ignore"));
          return (0);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::CANCEL)
        {
          if (l_blnErrorDialog == 0)
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error"), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Cancel"));
          }
          return (l_intReturn);
        }
      }
    }
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function ShakeStart( device & io_MLSTAR, variable i_intHHS, variable i_intHHSShakeSpeed ) variable {
    private variable l_strCommand;
    private variable l_intDialogOut;
    private variable l_loopError;
    private variable l_intReturn;
    private variable l_strErrorDescription;
    private dialog customDialog_4;
    private variable l_intHHSDeviceID;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_strDevice;
    private variable l_blnErrorDialog;
    private variable l_blnHHSConnectionType;
    l_strCommand = Translate("Shake Start");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
    l_intReturn = SetPlateLock(io_MLSTAR, i_intHHS, 1);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("ErrorDialog"), l_blnErrorDialog);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("HHSConnectionType"), l_blnHHSConnectionType);
    l_intReturn = Hamilton_DriverTools::CheckIntegerRange(i_intHHSShakeSpeed, Translate("i_intHHSShakeSpeed"), 25, 2500, l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_intHHSShakeSpeed"), Translate(""));
      return (1);
    }
    l_intReturn = HSLHamHeaterShaker::StartShaker(l_intHHSDeviceID, i_intHHSShakeSpeed);
    {
      l_loopError = 0;
      while (l_intReturn > 0)
      {
        l_loopError = l_loopError + 1;
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHSs, Translate("LastErrorReturn"), l_intReturn);
        if (l_blnErrorDialog == 1)
        {
          l_strErrorDescription = GetErrorDescription(l_intReturn);
          customDialog_4.InitCustomDialog("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");
          customDialog_4.SetCustomDialogProperty( "textBlock3.Text", l_strDevice );
          customDialog_4.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_4.SetCustomDialogProperty( "textBlock7.Text", l_strErrorDescription );
          customDialog_4.ShowCustomDialog();
          l_intDialogOut = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_intDialogOut = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Retry"));
          l_intReturn = HSLHamHeaterShaker::StartShaker(l_intHHSDeviceID, i_intHHSShakeSpeed);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Reset and Retry"));
          l_intReturn = Disconnect();
          l_intReturn = Connect(io_MLSTAR, i_intHHS, l_blnHHSConnectionType);
          l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
          l_intReturn = HSLHamHeaterShaker::StartShaker(l_intHHSDeviceID, i_intHHSShakeSpeed);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Ignore"));
          return (0);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::CANCEL)
        {
          if (l_blnErrorDialog == 0)
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error"), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Cancel"));
          }
          return (l_intReturn);
        }
      }
    }
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function WaitForTemperatureControl( variable i_intHHS, variable i_fltTemperature, variable i_intTemperaturePollingFrequency ) variable {
    private variable l_blnSimulation;
    private variable l_strCommand;
    private timer l_timerTemperature;
    private variable l_intReturn;
    private variable l_loopTemperature;
    private variable l_fltTemperature;
    private variable l_fltTemperatureDifference;
    private variable l_fltTemperatureMargin;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_strDevice;
    l_strCommand = Translate("WaitForTemperatureControl");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_blnSimulation = Util::GetSimulationMode();
    l_fltTemperature = 0.0;
    l_fltTemperatureMargin = 1.0;
    if (l_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      {
        l_loopTemperature = 0;
        while (l_fltTemperature <= i_fltTemperature)
        {
          l_loopTemperature = l_loopTemperature + 1;
          l_intReturn = HSLHamHeaterShaker::GetTemperature(i_intHHS, l_fltTemperature);
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate("HHS "), i_intHHS, Translate(" Current Temperature: "), l_fltTemperature, Translate(" - Target Temperature: "), i_fltTemperature);
          l_fltTemperatureDifference = i_fltTemperature - l_fltTemperature;
          if (l_fltTemperatureDifference < l_fltTemperatureMargin)
          {
            break;
          }
          if (l_loopTemperature >= 45)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error waiting for temperature for the HHS number "), i_intHHS, Translate(" timeout of 15 minutes exceeded."), Translate(""));
            return (1);
          }
          if( 0 == l_timerTemperature.SetTimer(i_intTemperaturePollingFrequency) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_timerTemperature.WaitTimer(hslTrue, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function ConnectAllHHSs( device & io_MLSTAR, variable i_blnHHSConnectionType ) variable {
    private object l_objHHS;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_loopHHSs;
    private variable l_intHHSs;
    private variable l_intHHSNodeID;
    private variable l_blnActive;
    private variable l_intReturn;
    private variable l_intReturnSuccess;
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    l_intHHSs = HSLJsonLib::GetArrayLength(l_objHHSs, Translate("hamiltonheatershakers"));
    {
      for(l_loopHHSs = 0; l_loopHHSs < l_intHHSs;)
      {
        l_loopHHSs = l_loopHHSs + 1;
        l_intJsonReturn = HSLJsonLib::Create(l_objHHS);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objHHSs, Translate("hamiltonheatershakers"), l_loopHHSs, l_objHHS);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting HHS JSON object for the HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objHHS, Translate("active"), l_blnActive);
        if (l_blnActive == ASWGLOBAL::BOOL::TRUE)
        {
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objHHS, Translate("hhs_node_id"), l_intHHSNodeID);
          l_intReturn = Connect(io_MLSTAR, l_loopHHSs, i_blnHHSConnectionType);
          if (l_intReturn > l_intReturnSuccess)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error connecting to HHS "), l_loopHHSs, Translate(""), Translate(""));
            return (1);
          }
        }
        l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
      }
    }
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    return (0);
  }

  function SetHHSDeviceID( variable i_intHHS, variable i_intHHSDeviceID ) variable {
    private object l_objHHS;
    private object l_objHHSs;
    private variable l_loopHHSs;
    private variable l_intJsonReturn;
    private variable l_strCommand;
    private variable l_intNumberHHSs;
    private variable l_strDevice;
    l_strCommand = Translate("Connect");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objHHS);
    l_intNumberHHSs = HSLJsonLib::GetArrayLength(l_objHHSs, Translate("hamiltonheatershakers"));
    if (i_intHHS > l_intNumberHHSs)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_intHHS"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objHHSs, Translate("hamiltonheatershakers"), i_intHHS, l_objHHS);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting HHS JSON object for the HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHS, Translate("hhs_device_id"), i_intHHSDeviceID);
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function GetAvailableHHS( variable & o_intHHS ) variable {
    private object l_objHHS;
    private object l_objHHSs;
    private variable l_loopHHSs;
    private variable l_intJsonReturn;
    private variable l_intActive;
    private variable l_strCommand;
    private variable l_intHHSs;
    private variable l_strBarcode;
    private variable l_strDevice;
    o_intHHS = 0;
    l_strCommand = Translate("Get Available HHS");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    o_intHHS = 0;
    l_intHHSs = HSLJsonLib::GetArrayLength(l_objHHSs, Translate("hamiltonheatershakers"));
    {
      for(l_loopHHSs = 0; l_loopHHSs < l_intHHSs;)
      {
        l_loopHHSs = l_loopHHSs + 1;
        l_intJsonReturn = HSLJsonLib::Create(l_objHHS);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objHHSs, Translate("hamiltonheatershakers"), l_loopHHSs, l_objHHS);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting HHS JSON object for the HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objHHS, Translate("active"), l_intActive);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting the active parameter from HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
          return (1);
        }
        if (l_intActive == 1)
        {
          l_strBarcode = Translate("");
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHS, Translate("barcode"), l_strBarcode);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting the barcode parameter from HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
            return (1);
          }
          if (l_strBarcode == "")
          {
            o_intHHS = l_loopHHSs;
            l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
            break;
          }
        }
        l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
      }
    }
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Available HHS: "), o_intHHS);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function SetHHSBarcode( variable i_intHHS, variable i_strBarcode ) variable {
    private object l_objHHS;
    private object l_objHHSs;
    private variable l_loopHHSs;
    private variable l_intJsonReturn;
    private variable l_strCommand;
    private variable l_intNumberHHSs;
    private variable l_strDevice;
    l_strCommand = Translate("Set HHS Barcode");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intJsonReturn = HSLJsonLib::Create(l_objHHS);
    l_intNumberHHSs = HSLJsonLib::GetArrayLength(l_objHHSs, Translate("hamiltonheatershakers"));
    if (i_intHHS > l_intNumberHHSs)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_intHHS"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objHHSs, Translate("hamiltonheatershakers"), i_intHHS, l_objHHS);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting HHS JSON object for the HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objHHS, Translate("barcode"), i_strBarcode);
    l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHS, Translate("occupied"), 1);
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error saving HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function ReleaseHHS( variable i_intHHS ) variable {
    private object l_objHHS;
    private variable l_intJsonReturn;
    private variable l_strCommand;
    private object l_objHHSs;
    private variable l_intNumberHHSs;
    private variable l_strDevice;
    l_strCommand = Translate("Release HHS");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objHHS);
    l_intNumberHHSs = HSLJsonLib::GetArrayLength(l_objHHSs, Translate("hamiltonheatershakers"));
    if (i_intHHS > l_intNumberHHSs)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_intHHS"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objHHSs, Translate("hamiltonheatershakers"), i_intHHS, l_objHHS);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting HHS JSON object for the HHS number "), i_intHHS, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objHHS, Translate("barcode"), Translate(""));
    l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHS, Translate("occupied"), 0);
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error saving HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function GetHHSDeviceID( variable i_intHHS, variable & o_intHHSDeviceID ) variable {
    private object l_objHHS;
    private object l_objHHSs;
    private variable l_loopHHSs;
    private variable l_intJsonReturn;
    private variable l_strCommand;
    private variable l_intNumberHHSs;
    private variable l_strDevice;
    o_intHHSDeviceID = 0;
    l_strCommand = Translate("Get HHS Device ID");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objHHS);
    l_intNumberHHSs = HSLJsonLib::GetArrayLength(l_objHHSs, Translate("hamiltonheatershakers"));
    if (i_intHHS > l_intNumberHHSs)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_intHHS"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objHHSs, Translate("hamiltonheatershakers"), i_intHHS, l_objHHS);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting HHS JSON object for the HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objHHS, Translate("hhs_device_id"), o_intHHSDeviceID);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function GetHHSByBarcode( variable i_strBarcode, variable & o_intHHS ) variable {
    private object l_objHHS;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_loopHHSs;
    private variable l_intActive;
    private variable l_strCommand;
    private variable l_strBarcode;
    private variable l_intHHSs;
    private variable l_strDevice;
    o_intHHS = 0;
    l_strCommand = Translate("Get HHS By Barcode");
    o_intHHS = 0;
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intHHSs = HSLJsonLib::GetArrayLength(l_objHHSs, Translate("hamiltonheatershakers"));
    {
      for(l_loopHHSs = 0; l_loopHHSs < l_intHHSs;)
      {
        l_loopHHSs = l_loopHHSs + 1;
        l_intJsonReturn = HSLJsonLib::Create(l_objHHS);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objHHSs, Translate("hamiltonheatershakers"), l_loopHHSs, l_objHHS);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting HHS JSON object for the HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objHHS, Translate("active"), l_intActive);
        if (l_intActive == 1)
        {
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHS, Translate("barcode"), l_strBarcode);
          if (l_strBarcode == i_strBarcode)
          {
            o_intHHS = l_loopHHSs;
            l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
            break;
          }
        }
        l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
      }
    }
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("HHS Assigned to Barcode "), i_strBarcode, Translate(": "), o_intHHS);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function GetHHSNodeID( variable i_intHHS, variable & o_intHHSNodeID ) variable {
    private object l_objHHS;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_loopHHSs;
    private variable l_strCommand;
    private variable l_intNumberHHSs;
    private variable l_strDevice;
    o_intHHSNodeID = 0;
    l_strCommand = Translate("Get HHS Node ID");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objHHS);
    l_intNumberHHSs = HSLJsonLib::GetArrayLength(l_objHHSs, Translate("hamiltonheatershakers"));
    if (i_intHHS > l_intNumberHHSs)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_intHHS"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objHHSs, Translate("hamiltonheatershakers"), i_intHHS, l_objHHS);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting HHS JSON object for the HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objHHS, Translate("hhs_node_id"), o_intHHSNodeID);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  private function GetErrorDescription( variable i_intError ) variable {
    private variable l_strErrorDescription;
    l_strErrorDescription = Translate("");
    if (i_intError == 0)
    {
      l_strErrorDescription = Translate("No error");
    }
    if (i_intError == 1)
    {
      l_strErrorDescription = Translate("Fatal error");
    }
    if (i_intError == 2)
    {
      l_strErrorDescription = Translate("Used node is not initialized");
    }
    if (i_intError == 3)
    {
      l_strErrorDescription = Translate("Device not connected");
    }
    if (i_intError == 4)
    {
      l_strErrorDescription = Translate("CAN error");
    }
    if (i_intError == 5)
    {
      l_strErrorDescription = Translate("No communication to EEPROM");
    }
    if (i_intError == 6)
    {
      l_strErrorDescription = Translate("Unknown command");
    }
    if (i_intError == 7)
    {
      l_strErrorDescription = Translate("Unknown parameter");
    }
    if (i_intError == 8)
    {
      l_strErrorDescription = Translate("Parameter out of range");
    }
    if (i_intError == 9)
    {
      l_strErrorDescription = Translate("Voltage outside permitted range");
    }
    if (i_intError == 10)
    {
      l_strErrorDescription = Translate("Stop received");
    }
    if (i_intError == 11)
    {
      l_strErrorDescription = Translate("Wrong system address");
    }
    if (i_intError == 12)
    {
      l_strErrorDescription = Translate("Parallel commands are not allowed");
    }
    if (i_intError == 13)
    {
      l_strErrorDescription = Translate("Shaker initialization failed");
    }
    if (i_intError == 14)
    {
      l_strErrorDescription = Translate("Shaker not initialized");
    }
    if (i_intError == 15)
    {
      l_strErrorDescription = Translate("Shaker step loss");
    }
    if (i_intError == 16)
    {
      l_strErrorDescription = Translate("Shaker start mode");
    }
    if (i_intError == 17)
    {
      l_strErrorDescription = Translate("plate lock initialization failed");
    }
    if (i_intError == 18)
    {
      l_strErrorDescription = Translate("Plate lock not initialized");
    }
    if (i_intError == 19)
    {
      l_strErrorDescription = Translate("Plate lock step loss");
    }
    if (i_intError == 20)
    {
      l_strErrorDescription = Translate("Temperature controlling not started");
    }
    if (i_intError == 21)
    {
      l_strErrorDescription = Translate("Timeout of temperature supervision");
    }
    if (i_intError == 22)
    {
      l_strErrorDescription = Translate("temperature out of supervision range");
    }
    if (i_intError == 23)
    {
      l_strErrorDescription = Translate("Temperature out of security range");
    }
    if (i_intError == 24)
    {
      l_strErrorDescription = Translate("Temperature sensor problem");
    }
    if (i_intError == 25)
    {
      l_strErrorDescription = Translate("Timeout during send of a command");
    }
    if (i_intError == 26)
    {
      l_strErrorDescription = Translate("Unknown firmware error");
    }
    if (i_intError == 27)
    {
      l_strErrorDescription = Translate("Input parameter must be a string");
    }
    if (i_intError == 28)
    {
      l_strErrorDescription = Translate("Input parameter must be an integer");
    }
    if (i_intError == 29)
    {
      l_strErrorDescription = Translate("Input parameter must be a double");
    }
    if (i_intError == 30)
    {
      l_strErrorDescription = Translate("Needed node not installed or switched off");
    }
    if (i_intError == 31)
    {
      l_strErrorDescription = Translate("Unknown firmware result string format");
    }
    if (i_intError == 32)
    {
      l_strErrorDescription = Translate("Wrong length of parameter");
    }
    return (l_strErrorDescription);
  }

  function GetHHSBarcodes( variable & o_arrBarcodes[] ) variable {
    private object l_objHHS;
    private object l_objHHSs;
    private variable l_loopHHSs;
    private variable l_intJsonReturn;
    private variable l_strCommand;
    private variable l_intHHSs;
    private variable l_strBarcode;
    private variable l_strDevice;
    o_arrBarcodes.SetSize( 0);
    l_strCommand = Translate("Get HHS Barcodes");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    l_intHHSs = HSLJsonLib::GetArrayLength(l_objHHSs, Translate("hamiltonheatershakers"));
    o_arrBarcodes.SetSize(l_intHHSs);
    {
      for(l_loopHHSs = 0; l_loopHHSs < l_intHHSs;)
      {
        l_loopHHSs = l_loopHHSs + 1;
        l_intJsonReturn = HSLJsonLib::Create(l_objHHS);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objHHSs, Translate("hamiltonheatershakers"), l_loopHHSs, l_objHHS);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting HHS JSON object for the HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHS, Translate("barcode"), l_strBarcode);
        o_arrBarcodes.SetAt(l_loopHHSs-1, l_strBarcode);
        l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
      }
    }
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function GetHHSBarcode( variable i_intHHS, variable & o_strBarcode ) variable {
    private object l_objHHS;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_loopHHSs;
    private variable l_strCommand;
    private variable l_intHHSs;
    private variable l_strDevice;
    o_strBarcode = 0;
    l_strCommand = Translate("Get HHS Barcode");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    o_strBarcode = Translate("");
    l_intHHSs = HSLJsonLib::GetArrayLength(l_objHHSs, Translate("hamiltonheatershakers"));
    {
      for(l_loopHHSs = 0; l_loopHHSs < l_intHHSs;)
      {
        l_loopHHSs = l_loopHHSs + 1;
        if (l_loopHHSs == i_intHHS)
        {
          l_intJsonReturn = HSLJsonLib::Create(l_objHHS);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objHHSs, Translate("hamiltonheatershakers"), l_loopHHSs, l_objHHS);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting HHS JSON object for the HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHS, Translate("barcode"), o_strBarcode);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting the barcode parameter from HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
          break;
        }
      }
    }
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("HHS "), i_intHHS, Translate(" barcode: "), o_strBarcode);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function StopShaker( device & io_MLSTAR, variable i_intHHS ) variable {
    private variable l_strCommand;
    private variable l_intDialogOut;
    private variable l_strErrorDescription;
    private variable l_intReturn;
    private variable l_loopError;
    private dialog customDialog_5;
    private variable l_intHHSDeviceID;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_blnErrorDialog;
    private variable l_blnHHSConnectionType;
    private variable l_strDevice;
    l_strCommand = Translate("Stop Shaker");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("ErrorDialog"), l_blnErrorDialog);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("HHSConnectionType"), l_blnHHSConnectionType);
    l_intReturn = HSLHamHeaterShaker::StopShaker(l_intHHSDeviceID);
    {
      l_loopError = 0;
      while (l_intReturn > 0)
      {
        l_loopError = l_loopError + 1;
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHSs, Translate("LastErrorReturn"), l_intReturn);
        if (l_blnErrorDialog == 1)
        {
          l_strErrorDescription = GetErrorDescription(l_intReturn);
          customDialog_5.InitCustomDialog("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");
          customDialog_5.SetCustomDialogProperty( "textBlock3.Text", l_strDevice );
          customDialog_5.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_5.SetCustomDialogProperty( "textBlock7.Text", l_strErrorDescription );
          customDialog_5.ShowCustomDialog();
          l_intDialogOut = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_intDialogOut = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Retry"));
          l_intReturn = HSLHamHeaterShaker::StopShaker(l_intHHSDeviceID);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Reset and Retry"));
          l_intReturn = Disconnect();
          l_intReturn = Connect(io_MLSTAR, i_intHHS, l_blnHHSConnectionType);
          l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
          l_intReturn = HSLHamHeaterShaker::StopShaker(l_intHHSDeviceID);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Ignore"));
          return (0);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::CANCEL)
        {
          if (l_blnErrorDialog == 0)
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error"), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Cancel"));
          }
          return (l_intReturn);
        }
      }
    }
    l_intReturn = SetPlateLock(io_MLSTAR, i_intHHS, 0);
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function StopTemperatureControl( device & io_MLSTAR, variable i_intHHS ) variable {
    private variable l_strCommand;
    private variable l_intDialogOut;
    private variable l_strErrorDescription;
    private variable l_intReturn;
    private variable l_loopError;
    private dialog customDialog_6;
    private variable l_intHHSDeviceID;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_blnErrorDialog;
    private variable l_blnHHSConnectionType;
    private variable l_strDevice;
    l_strCommand = Translate("Stop Temperature Control");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("ErrorDialog"), l_blnErrorDialog);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("HHSConnectionType"), l_blnHHSConnectionType);
    l_intReturn = HSLHamHeaterShaker::StopTempCtrl(l_intHHSDeviceID);
    {
      l_loopError = 0;
      while (l_intReturn > 0)
      {
        l_loopError = l_loopError + 1;
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHSs, Translate("LastErrorReturn"), l_intReturn);
        if (l_blnErrorDialog == 1)
        {
          l_strErrorDescription = GetErrorDescription(l_intReturn);
          customDialog_6.InitCustomDialog("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");
          customDialog_6.SetCustomDialogProperty( "textBlock3.Text", l_strDevice );
          customDialog_6.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_6.SetCustomDialogProperty( "textBlock7.Text", l_strErrorDescription );
          customDialog_6.ShowCustomDialog();
          l_intDialogOut = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_intDialogOut = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Retry"));
          l_intReturn = HSLHamHeaterShaker::StopTempCtrl(l_intHHSDeviceID);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Reset and Retry"));
          l_intReturn = Disconnect();
          l_intReturn = Connect(io_MLSTAR, i_intHHS, l_blnHHSConnectionType);
          l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
          l_intReturn = HSLHamHeaterShaker::StopTempCtrl(l_intHHSDeviceID);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Ignore"));
          return (0);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::CANCEL)
        {
          if (l_blnErrorDialog == 0)
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error"), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Cancel"));
          }
          return (l_intReturn);
        }
      }
    }
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function GetTemperature( device & io_MLSTAR, variable i_intHHS, variable & o_fltTemperature ) variable {
    private variable l_blnReturn;
    private variable l_strCommand;
    private variable l_intDialogOut;
    private variable l_strErrorDescription;
    private variable l_intReturn;
    private variable l_loopError;
    private dialog customDialog_7;
    private variable l_intHHSDeviceID;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_strDevice;
    private variable l_blnErrorDialog;
    private variable l_blnHHSConnectionType;
    private variable l_intReturnSuccess;
    private variable l_blnSimulation;
    private variable l_intReturnError;
    o_fltTemperature = 0;
    l_strCommand = Translate("Get Temperature");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_blnReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("Succes"), l_intReturnSuccess);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("Error"), l_intReturnError);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("Simulation"), l_blnSimulation);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("ErrorDialog"), l_blnErrorDialog);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("HHSConnectionType"), l_blnHHSConnectionType);
    l_intReturn = HSLHamHeaterShaker::GetTemperature(l_intHHSDeviceID, o_fltTemperature);
    {
      l_loopError = 0;
      while (l_intReturn > 0)
      {
        l_loopError = l_loopError + 1;
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHSs, Translate("LastErrorReturn"), l_intReturn);
        if (l_blnErrorDialog == 1)
        {
          l_strErrorDescription = GetErrorDescription(l_intReturn);
          customDialog_7.InitCustomDialog("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");
          customDialog_7.SetCustomDialogProperty( "textBlock3.Text", l_strDevice );
          customDialog_7.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_7.SetCustomDialogProperty( "textBlock7.Text", l_strErrorDescription );
          customDialog_7.ShowCustomDialog();
          l_intDialogOut = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_intDialogOut = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Retry"));
          l_intReturn = HSLHamHeaterShaker::GetTemperature(l_intHHSDeviceID, o_fltTemperature);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Reset and Retry"));
          l_blnReturn = Disconnect();
          l_blnReturn = Connect(io_MLSTAR, i_intHHS, l_blnHHSConnectionType);
          l_blnReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
          l_intReturn = HSLHamHeaterShaker::GetTemperature(l_intHHSDeviceID, o_fltTemperature);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Ignore"));
          return (l_intReturnSuccess);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::CANCEL)
        {
          if (l_blnErrorDialog == 0)
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error"), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Cancel"));
          }
          return (l_intReturn);
        }
      }
    }
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (l_intReturnSuccess);
  }

  function ShakeTimed( device & io_MLSTAR, variable i_intHHS, variable i_intHHSShakeSpeed, variable i_intHHSShakeTime, variable i_blnWaitForTime, variable i_blnStoppableTimer ) variable {
    private variable l_strCommand;
    private variable l_intDialogOut;
    private variable l_strErrorDescription;
    private variable l_intReturn;
    private variable l_loopError;
    private timer l_timerShake;
    private dialog customDialog_8;
    private variable l_intHHSDeviceID;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_blnErrorDialog;
    private variable l_blnHHSConnectionType;
    private variable l_strDevice;
    l_strCommand = Translate("Shake Timed");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
    l_intReturn = SetPlateLock(io_MLSTAR, i_intHHS, 1);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("ErrorDialog"), l_blnErrorDialog);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("HHSConnectionType"), l_blnHHSConnectionType);
    l_intReturn = Hamilton_DriverTools::CheckIntegerRange(i_intHHSShakeSpeed, Translate("i_intHHSShakeSpeed"), 25, 2500, l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_intHHSShakeSpeed"), Translate(""));
      return (1);
    }
    l_intReturn = Hamilton_DriverTools::CheckIntegerRange(i_intHHSShakeTime, Translate("i_intHHSShakeTime"), 1, 30000, l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_intHHSShakeTime"), Translate(""));
      return (1);
    }
    l_intReturn = Hamilton_DriverTools::CheckBool(i_blnWaitForTime, Translate("i_blnWaitForTime"), l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_blnWaitForTime"), Translate(""));
      return (1);
    }
    l_intReturn = Hamilton_DriverTools::CheckBool(i_blnStoppableTimer, Translate("i_blnStoppableTimer"), l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_blnStoppableTimer"), Translate(""));
      return (1);
    }
    if (i_blnWaitForTime == 1)
    {
      l_intReturn = HSLHamHeaterShaker::StartShaker(l_intHHSDeviceID, i_intHHSShakeSpeed);
    }
    else
    {
      l_intReturn = HSLHamHeaterShaker::StartShakerTimed(l_intHHSDeviceID, i_intHHSShakeSpeed, i_intHHSShakeTime);
    }
    {
      l_loopError = 0;
      while (l_intReturn > 0)
      {
        l_loopError = l_loopError + 1;
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHSs, Translate("LastErrorReturn"), l_intReturn);
        if (l_blnErrorDialog == 1)
        {
          l_strErrorDescription = GetErrorDescription(l_intReturn);
          customDialog_8.InitCustomDialog("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");
          customDialog_8.SetCustomDialogProperty( "textBlock3.Text", l_strDevice );
          customDialog_8.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_8.SetCustomDialogProperty( "textBlock7.Text", l_strErrorDescription );
          customDialog_8.ShowCustomDialog();
          l_intDialogOut = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_intDialogOut = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Retry"));
          if (i_blnWaitForTime == 1)
          {
            l_intReturn = HSLHamHeaterShaker::StartShaker(l_intHHSDeviceID, i_intHHSShakeSpeed);
          }
          else
          {
            l_intReturn = HSLHamHeaterShaker::StartShakerTimed(l_intHHSDeviceID, i_intHHSShakeSpeed, i_intHHSShakeTime);
          }
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Reset and Retry"));
          l_intReturn = Disconnect();
          l_intReturn = Connect(io_MLSTAR, i_intHHS, l_blnHHSConnectionType);
          l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
          if (i_blnWaitForTime == 1)
          {
            l_intReturn = HSLHamHeaterShaker::StartShaker(l_intHHSDeviceID, i_intHHSShakeSpeed);
          }
          else
          {
            l_intReturn = HSLHamHeaterShaker::StartShakerTimed(l_intHHSDeviceID, i_intHHSShakeSpeed, i_intHHSShakeTime);
          }
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Ignore"));
          return (0);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::CANCEL)
        {
          if (l_blnErrorDialog == 0)
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error"), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Cancel"));
          }
          return (l_intReturn);
        }
      }
    }
    if (i_blnWaitForTime == 1)
    {
      if( 0 == l_timerShake.SetTimer(i_intHHSShakeTime) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (i_blnStoppableTimer == 1)
      {
        if( 0 == l_timerShake.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if( 0 == l_timerShake.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      HSLHamHeaterShaker::StopShaker(i_intHHS);
    }
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function GetLastError( variable & o_strErrorDescription, variable & o_intLastReturn ) variable {
    private variable l_strCommand;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_strDevice;
    o_strErrorDescription = 0;
    o_intLastReturn = 0;
    l_strCommand = Translate("Get Last Error");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objHHSs, Translate("LastErrorReturn"), o_intLastReturn);
    o_strErrorDescription = GetErrorDescription(o_intLastReturn);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function SetSimulation( device & io_MLSTAR, variable i_blnSimulation ) variable {
    private variable l_intReturn;
    private variable l_strCommand;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_strDevice;
    l_strCommand = Translate("Set Simulation");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intReturn = Hamilton_DriverTools::CheckBool(i_blnSimulation, Translate("i_blnSimulation"), l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_blnSimulation"), Translate(""));
      return (1);
    }
    HSLHamHeaterShaker::SetSimulation(i_blnSimulation);
    l_intJsonReturn = HSLJsonLib::SetBooleanProperty(l_objHHSs, Translate("Simulation"), i_blnSimulation);
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function TerminateAllHHSs( device & io_MLSTAR ) variable {
    private object l_objHHS;
    private object l_objHHSs;
    private variable l_loopHHSs;
    private variable l_intJsonReturn;
    private variable l_intReturn;
    private variable l_intHHSs;
    private variable l_strCommand;
    private variable l_blnReturn;
    private variable l_strDevice;
    l_strCommand = Translate("Terminate All HHSs");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intReturn = HSLHamHeaterShaker::StopAllShaker();
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading HHS configuration file: "), g_strHHSConfigurationFile, Translate(""), Translate(""));
      return (1);
    }
    l_intHHSs = HSLJsonLib::GetArrayLength(l_objHHSs, Translate("hamiltonheatershakers"));
    {
      for(l_loopHHSs = 0; l_loopHHSs < l_intHHSs;)
      {
        l_loopHHSs = l_loopHHSs + 1;
        l_intJsonReturn = HSLJsonLib::Create(l_objHHS);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objHHSs, Translate("hamiltonheatershakers"), l_loopHHSs, l_objHHS);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error getting HHS JSON object for the HHS number "), l_loopHHSs, Translate(" from the HHS configuration file "), g_strHHSConfigurationFile);
          return (1);
        }
        l_blnReturn = StopTemperatureControl(io_MLSTAR, l_loopHHSs);
        l_blnReturn = StopShaker(io_MLSTAR, l_loopHHSs);
        l_intJsonReturn = HSLJsonLib::Release(l_objHHS);
      }
    }
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    l_blnReturn = Disconnect();
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function _README(  ) void {
  }

  function WaitForShake( device & io_MLSTAR, variable i_intHHS ) variable {
    private dialog customDialog_9;
    private variable l_intDialogOut;
    private variable l_intReturn;
    private variable l_loopError;
    private variable l_strCommand;
    private variable l_strErrorDescription;
    private variable l_intHHSDeviceID;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_blnErrorDialog;
    private variable l_blnHHSConnectionType;
    private variable l_strDevice;
    l_strCommand = Translate("Wait For Shake");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("ErrorDialog"), l_blnErrorDialog);
    l_intJsonReturn = HSLJsonLib::GetBooleanProperty(l_objHHSs, Translate("HHSConnectionType"), l_blnHHSConnectionType);
    l_intReturn = HSLHamHeaterShaker::WaitForShaker(l_intHHSDeviceID);
    {
      l_loopError = 0;
      while (l_intReturn != ASWGLOBAL::BOOL::FALSE)
      {
        l_loopError = l_loopError + 1;
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objHHSs, Translate("LastErrorReturn"), l_intReturn);
        if (l_blnErrorDialog == 1)
        {
          l_strErrorDescription = GetErrorDescription(l_intReturn);
          customDialog_9.InitCustomDialog("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");
          customDialog_9.SetCustomDialogProperty( "textBlock3.Text", l_strDevice );
          customDialog_9.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_9.SetCustomDialogProperty( "textBlock7.Text", l_strErrorDescription );
          customDialog_9.ShowCustomDialog();
          l_intDialogOut = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_intDialogOut = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Retry"));
          l_intReturn = HSLHamHeaterShaker::WaitForShaker(l_intHHSDeviceID);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error: Selected Recovery: "), Translate("Reset and Retry"));
          l_intReturn = Disconnect();
          l_intReturn = Connect(io_MLSTAR, i_intHHS, l_blnHHSConnectionType);
          l_intReturn = HSLHamHeaterShaker::WaitForShaker(l_intHHSDeviceID);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Ignore"));
          return (0);
        }
        if (l_intDialogOut == ASWGLOBAL::DIALOG::CANCEL)
        {
          if (l_blnErrorDialog == 0)
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error. Selected Recovery: "), Translate("Cancel"));
          }
          else
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete with Error."), Translate(""));
          }
          return (l_intReturn);
        }
      }
    }
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function RampTemperature( variable i_intHHS, variable i_fltTemperature, variable i_fltSlowDownTemp ) variable {
    private variable l_fltTemperature;
    private variable l_fltTemperatureDifference;
    private variable l_loopTemperature;
    private variable l_blnSimulation;
    private variable l_intReturn;
    private variable l_fltTemperatureMargin;
    private variable l_strCommand;
    private timer l_timerTemperature;
    private variable l_intHHSDeviceID;
    private variable l_blnReturn;
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_strDevice;
    l_strCommand = Translate("RampTemperature");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_blnSimulation = Util::GetSimulationMode();
    l_fltTemperature = 0.0;
    l_fltTemperatureMargin = 1.0;
    l_blnReturn = GetHHSDeviceID(i_intHHS, l_intHHSDeviceID);
    l_intReturn = Hamilton_DriverTools::CheckFloatRange(i_fltTemperature, Translate("i_fltTemperature"), 20.0, 105.0, l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_fltTemperature"), Translate(""));
      return (1);
    }
    l_intReturn = Hamilton_DriverTools::CheckFloatRange(i_fltSlowDownTemp, Translate("i_fltSlowDownTemp"), 20.0, 105.0, l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_fltSlowDownTemp"), Translate(""));
      return (1);
    }
    l_intReturn = HSLHamHeaterShaker::StartTempCtrl(l_intHHSDeviceID, 105, 0);
    if (l_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      {
        l_loopTemperature = 0;
        while (l_fltTemperature <= i_fltTemperature)
        {
          l_loopTemperature = l_loopTemperature + 1;
          l_intReturn = HSLHamHeaterShaker::GetTemperature(l_intHHSDeviceID, l_fltTemperature);
          TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("HHS "), i_intHHS, Translate(" Current Temperature: "), l_fltTemperature, Translate(" - Target Temperature: "), i_fltTemperature);
          l_fltTemperatureDifference = i_fltSlowDownTemp - l_fltTemperature;
          if (l_fltTemperatureDifference < l_fltTemperatureMargin)
          {
            break;
          }
          l_fltTemperatureDifference = l_fltTemperature - i_fltSlowDownTemp;
          if (l_fltTemperatureDifference < l_fltTemperatureMargin)
          {
            break;
          }
          if (l_loopTemperature >= 300)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error waiting for temperature for the HHS number "), i_intHHS, Translate(" timeout of 15 minutes exceeded."), Translate(""));
            return (1);
          }
          if( 0 == l_timerTemperature.SetTimer(3) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_timerTemperature.WaitTimer(hslTrue, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    l_intReturn = HSLHamHeaterShaker::StartTempCtrl(l_intHHSDeviceID, i_fltTemperature, 0);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }

  function SetErrorHandling( variable i_blnErrorDialog ) variable {
    private object l_objHHSs;
    private variable l_intJsonReturn;
    private variable l_intReturn;
    private variable l_strDevice;
    private variable l_strCommand;
    l_strCommand = Translate("Set Error Handling");
    l_intJsonReturn = HSLJsonLib::Create(l_objHHSs);
    l_intJsonReturn = HSLJsonLib::Load(l_objHHSs, g_strHHSConfigurationFile);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objHHSs, Translate("Device"), l_strDevice);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Start"), Translate(""));
    l_intReturn = Hamilton_DriverTools::CheckBool(i_blnErrorDialog, Translate("i_blnErrorDialog"), l_strCommand, l_strDevice);
    if (l_intReturn == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(": Error in Command - "), l_strCommand, Translate(":  Error Input Parameter invalid or out of range for input - "), Translate("i_blnSimulation"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::SetBooleanProperty(l_objHHSs, Translate("ErrorDialog"), i_blnErrorDialog);
    l_intJsonReturn = HSLJsonLib::Save(l_objHHSs, g_strHHSConfigurationFile, 1);
    l_intJsonReturn = HSLJsonLib::Release(l_objHHSs);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, l_strDevice, Translate(" - "), l_strCommand, Translate(" - "), Translate("Complete"), Translate(""));
    return (0);
  }
} // library namespace
