#pragma once
#include "Training\\BF4\\HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLSensorLib.hsl"
#include "HSLInhecoTEC\\HSLInhecoTECLib.hsl"
#include "Inheco ODTC\\Inheco ODTC.hsl"
#include "Training\\BF4\\ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "Training\\BF4\\HSLExtensions\\File.hsl"
#include "HSLSeqLib.hsl"
#include "Training\\BF4\\HSLAppsLib.hsl"
#include "Training\\BF4\\HSLUtilLib2.hsl"
#include "Training\\BF4\\HSLMthLib.hsl"
#include "RemoveTextDelimiters\\RemoveTextDelimitersFromAsciiTextFile.hsl"
#include "Training\\BF4\\ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLMETEDLib.hs_"
#include "Training\\BF4\\HSLMECCLib.hs_"
#include "Training\\BF4\\HSLPTLLib.hsl"

namespace CPACCONTROLLER {
  variable t_blnSimulationModeON;
  private function Abstract(  ) void ;
  function CPAC_CheckTemperature( variable i_intCPACTemp, variable i_intCPACdevice ) void ;
  function CPAC_Init( variable i_blnSimulation ) void ;
  function CPAC_SetTemperature( variable i_intCPACTemp, variable i_intCPACdevice ) void ;
  function CPAC_StopTemp( variable i_intCPACdevice ) void ;
  function CPAC_Terminate(  ) void ;
  private function _CPAC_ReportErrorText( variable i_strErrorCode ) void ;
  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function Abstract(  ) void {
    MECC::TraceComment(Translate("*********************************************************************\nSubmethod Library:  CPACController (adapted from NGS Framework\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate:  February 28, 2020 (By Stephan Grosch)\nVersion:  3.4.5\n\nVersion Notes:\n1. see _Version\n\n*********************************************************************"));
  }

  function CPAC_Init( variable i_blnSimulation ) void {
    private variable l_strInitCPAC;
    private variable l_strErrorCode;
    private variable l_answer_CPACerror;
    private variable l_strErrorText;
    private variable l_answer_CPACcheck;
    private variable l_strLastError;
    private variable l_strFirmWareVersion;
    private variable l_arrListCPACinitMessage[];
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Start Submethod : CPAC_Init <<<<<<<<<<"));
    t_blnSimulationModeON = i_blnSimulation;
    HSLInhecoTECLib::Initialize(0, t_blnSimulationModeON, l_strInitCPAC);
    if (t_blnSimulationModeON == 0)
    {
      if (l_strInitCPAC != "000")
      {
        HSLInhecoTECLib::GetLastError(l_strLastError);
        l_strLastError = StrConcat2(Translate("CPAC error description : "), l_strLastError);
        l_arrListCPACinitMessage.SetSize(0);
        l_arrListCPACinitMessage.AddAsLast(l_strLastError);
        l_answer_CPACcheck = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("CPAC - There is an error with the CPAC Controller : "), Translate("Make sure the unit is turned on and click OK to try again"), l_arrListCPACinitMessage);
        if (l_answer_CPACcheck == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
        HSLInhecoTECLib::Initialize(0, 0, l_strInitCPAC);
        if (l_strInitCPAC != "000")
        {
          HSLInhecoTECLib::GetDescriptionForErrorCode(l_strInitCPAC, l_strErrorText);
          l_strLastError = StrConcat2(Translate("CPAC error description : "), l_strErrorText);
          l_arrListCPACinitMessage.SetSize(0);
          l_arrListCPACinitMessage.AddAsLast(l_strLastError);
          l_answer_CPACerror = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("CPAC - There is still an error with the CPAC Controller : "), Translate("Click Cancel to end the method or OK to go the next process step without connecting.  "), l_arrListCPACinitMessage);
          if (l_answer_CPACerror == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
          }
          if (l_answer_CPACerror == ASWGLOBAL::DIALOG::OK)
          {
            MECC::TraceComment(Translate("************ WARNING! Method will continue with the CPAC not working correctly ************"));
          }
        }
      }
      HSLInhecoTECLib::SetTraceLevel(1);
      HSLInhecoTECLib::GetFirmwareVersion(0, 1, l_strFirmWareVersion, l_strErrorCode);
      Trace ("Firmware version for MTEC Controller:  ", l_strFirmWareVersion);
      _CPAC_ReportErrorText(l_strErrorCode);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC INIT simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete : CPAC_Init <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function CPAC_SetTemperature( variable i_intCPACTemp, variable i_intCPACdevice ) void {
    private variable l_strErrorCode;
    private variable l_fltActualTemperatureCPAC;
    private variable l_fltCPACTemperature;
    private variable l_strDisplayTextToStatusWindow;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  CPAC_SetTemperature <<<<<<<<<<"));
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Set temperature of CPAC to : "), i_intCPACTemp, Translate(" °C."), Translate(" Adjusting temperature of module started..."));
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLInhecoTECLib::GetActualDeviceTemperature(0, i_intCPACdevice, 1, l_fltActualTemperatureCPAC, l_strErrorCode);
      Trace ("Current CPAC Temperature (in tenths of degrees):  ", l_fltActualTemperatureCPAC);
      _CPAC_ReportErrorText(l_strErrorCode);
      l_fltCPACTemperature = i_intCPACTemp / (1.0 * 1.0);
      HSLInhecoTECLib::SetTargetTemperature(0, i_intCPACdevice, l_fltCPACTemperature, l_strErrorCode);
      _CPAC_ReportErrorText(l_strErrorCode);
      Trace ("CPAC Temperature float variable set to:  ", l_fltCPACTemperature);
      HSLInhecoTECLib::StartTemperatureControl(0, i_intCPACdevice, l_strErrorCode);
      _CPAC_ReportErrorText(l_strErrorCode);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC set temperature"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  CPAC_SetTemperature <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function CPAC_Terminate(  ) void {
    private variable l_strErrorCode;
    private variable l_strDisplayTextToStatusWindow;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: CPAC_Terminate <<<<<<<<<<"));
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Terminate device : CPAC. "), Translate(""), Translate(""), Translate(""));
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLInhecoTECLib::StopTemperatureControl(0, 1, l_strErrorCode);
      _CPAC_ReportErrorText(l_strErrorCode);
      HSLInhecoTECLib::StopTemperatureControl(0, 2, l_strErrorCode);
      _CPAC_ReportErrorText(l_strErrorCode);
      HSLInhecoTECLib::Terminate(ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC termination"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: CPAC_Terminate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _CPAC_ReportErrorText( variable i_strErrorCode ) void {
    private variable l_strDecodedErrorText;
    if (i_strErrorCode != "TEC_0")
    {
      if (i_strErrorCode != "000")
      {
        HSLInhecoTECLib::GetDescriptionForErrorCode(i_strErrorCode, l_strDecodedErrorText);
        Trace ("CPAC ERROR CODE:  ", i_strErrorCode);
        Trace ("CPAC ERROR DECODED MESSSAGE:  ", l_strDecodedErrorText);
        _DATA_IntegratedAbortHandler(Translate("NGSStarPrep.smt "), Translate("CPAC_Report Error handler has written more detailed information into the logfile."));
      }
    }
  }

  private function _Version(  ) void {
  }

  function CPAC_CheckTemperature( variable i_intCPACTemp, variable i_intCPACdevice ) void {
    private variable l_strErrorCode;
    private variable l_fltActualTemperatureCPAC;
    private variable l_strGetTypeOfCurrentVariable;
    private variable l_intReturnValue_CPACcheckTemperature;
    private timer l_hdlTimerWait10seconds;
    private variable l_intCountTrialsToReachRequestedTemperature;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_strTemperature;
    private variable l_strCPACTemp;
    private variable l_strActualTemperatureCPAC;
    private variable l_arrListCheckCPACTemperatureMessage[];
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  CPAC_CheckTemperature <<<<<<<<<<"));
    if (t_blnSimulationModeON == 0)
    {
      l_fltActualTemperatureCPAC = 0.0;
      HSLInhecoTECLib::GetActualDeviceTemperature(0, i_intCPACdevice, 1, l_fltActualTemperatureCPAC, l_strErrorCode);
      l_strGetTypeOfCurrentVariable = StrGetType(l_fltActualTemperatureCPAC);
      Trace ("Expected max CPAC temperature:  ", i_intCPACTemp);
      Trace ("Get actual CPAC temperature:  ", l_fltActualTemperatureCPAC);
      Trace ("Get type of current variable (get temp):  ", l_strGetTypeOfCurrentVariable);
      _CPAC_ReportErrorText(l_strErrorCode);
      if (i_intCPACTemp > 0)
      {
        {
          l_intCountTrialsToReachRequestedTemperature = 0;
          while (l_fltActualTemperatureCPAC > i_intCPACTemp)
          {
            l_intCountTrialsToReachRequestedTemperature = l_intCountTrialsToReachRequestedTemperature + 1;
            if( 0 == l_hdlTimerWait10seconds.SetTimer(10) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == l_hdlTimerWait10seconds.WaitTimer(hslFalse, hslFalse) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            HSLInhecoTECLib::GetActualDeviceTemperature(0, i_intCPACdevice, 1, l_fltActualTemperatureCPAC, l_strErrorCode);
            l_strTemperature = StrFStr(l_fltActualTemperatureCPAC);
            StrReplace(l_strTemperature, Translate("0000"), Translate(""));
            _CPAC_ReportErrorText(l_strErrorCode);
            l_strDisplayTextToStatusWindow = StrConcat8(Translate("CPAC check temperature. Actual temperature : "), l_strTemperature, Translate(" °C. Requested temperature : "), i_intCPACTemp, Translate(" °C. Cooling down CPAC."), Translate(""), Translate(""), Translate(""));
            VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
            Trace ("Current CPAC temperature:  ", l_fltActualTemperatureCPAC);
            if (l_intCountTrialsToReachRequestedTemperature > 60)
            {
              l_strCPACTemp = StrIStr(i_intCPACTemp);
              l_strCPACTemp = StrConcat2(Translate("CPAC requested temperature [°C] : "), l_strCPACTemp);
              l_strActualTemperatureCPAC = StrFStr(l_fltActualTemperatureCPAC);
              l_strActualTemperatureCPAC = StrConcat2(Translate("CPAC reached temperature [°C] : "), l_fltActualTemperatureCPAC);
              l_arrListCheckCPACTemperatureMessage.SetSize(0);
              l_arrListCheckCPACTemperatureMessage.AddAsLast(l_strCPACTemp);
              l_arrListCheckCPACTemperatureMessage.AddAsLast(l_strActualTemperatureCPAC);
              l_intReturnValue_CPACcheckTemperature = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("CPAC - Check Temperature Minimum : "), Translate("It is taking a long time for the CPAC to reach temperature. Click Cancel to abort the method OR OK to try to recover the method"), l_arrListCheckCPACTemperatureMessage);
              if (l_intReturnValue_CPACcheckTemperature == ASWGLOBAL::DIALOG::CANCEL)
              {
                abort;
              }
              l_intReturnValue_CPACcheckTemperature = VectorCustomDialogs::MessageDialog(Translate("CPAC recovery options"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Press YES to wait for the CPAC to reach the requested temperature OR NO to continue the Assay without waiting for CPAC to reach desired temperature."));
              if (l_intReturnValue_CPACcheckTemperature == ASWGLOBAL::DIALOG::NO)
              {
                break;
              }
            }
          }
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC check Temperature minimum simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  CPAC_CheckTemperature <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void {
    private variable l_strAffectedLibrary;
    private variable l_strAbortMessage;
    private variable l_arrListAbortHandlerMessage[];
    l_strAffectedLibrary = StrConcat2(Translate("Affected library :    "), i_strFunctionName);
    l_strAbortMessage = StrConcat2(Translate("Message : "), i_strAbortMessage);
    l_arrListAbortHandlerMessage.SetSize(0);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAffectedLibrary);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAbortMessage);
    VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Internal abort handler activated - error occurred - abort routine started"), Translate("Press OK to Abort the run."), l_arrListAbortHandlerMessage);
    abort;
  }

  function CPAC_StopTemp( variable i_intCPACdevice ) void {
    private variable l_strErrorCode;
    private variable l_strDisplayTextToStatusWindow;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: CPAC_Terminate <<<<<<<<<<"));
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Stopping Temp Control : CPAC. "), Translate(""), Translate(""), Translate(""));
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLInhecoTECLib::StopTemperatureControl(0, i_intCPACdevice, l_strErrorCode);
      _CPAC_ReportErrorText(l_strErrorCode);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC termination"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: CPAC_Terminate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }
} // library namespace
