#pragma once
#include "Training\\BF4\\ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLStrLib.hsl"
#include "HSLJson\\HSLJson.hsl"
#include "Inheco ODTC\\Inheco ODTC.hsl"
#include "HSLUtilLib.hsl"
#include "Training\\BF4\\ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "Training\\BF4\\Hamilton DriverTools\\Hamilton DriverTools.hsl"
#include "HSLMETEDLib.hs_"
#include "Training\\BF4\\HSLMECCLib.hs_"

namespace INHECOODTCCONTROLLER {
  variable t_strDeviceIDKey;
  variable t_strComputerIPKey;
  variable t_blnSimulation;
  variable t_strDeviceIPKey;
  variable t_strDevicePortKey;
  variable t_strLibrary;
  variable t_strLockIDKey;
  variable t_strDurationKey;
  variable t_strRequestIDKey;
  variable t_strPmsIDKey;
  variable t_strTimeoutKey;
  variable t_blnDisplayErrorDialogs;
  global variable t_strODTCConfigurationFilePath("C:\Program Files (x86)\\HAMILTON\\Library\\Device Sub-method Libraries\\Inheco\\ODTC\\Advanced\\V1.0\\Configuration\\Inheco_ODTC_configuration.json"); // Location for the configuration file to control all the system's ODTCs
  variable t_strLastErrorReturnKey;
  variable t_strLastErrorMessageKey;
  variable t_intNumberOfDevicesInConfig;
  variable t_strODTCConfigurationFilePath;
  function Abort( variable i_intDeviceNumber ) variable ;
  function CloseDoor( variable i_intDeviceNumber ) variable ;
  function ConnectSingle( variable i_intDeviceNumber, variable i_blnSimulation, variable i_blnDisplayErrorDialogs, variable i_strConfigurationFilePath ) variable ;
  function DownloadProtocol( variable i_intDeviceNumber, variable i_strProtocolFile ) variable ;
  function EvaluateError( variable i_intDeviceNumber, variable & o_intErrorReturn, variable & o_strErrorMessage ) variable ;
  function ExecuteMethod( variable i_intDeviceNumber, variable i_strMethodName, variable i_intPriority, variable & o_intDuration, variable & o_intRequestID ) variable ;
  function GetStatus( variable i_intDeviceNumber, variable & o_strDeviceID, variable & o_strState, variable & o_blnLocked, variable & o_strPmsID, variable & o_strCurrentTime ) variable ;
  function InitializeSingle( variable i_intDeviceNumber ) variable ;
  function OpenDoor( variable i_intDeviceNumber ) variable ;
  function ReadActualTemperature( variable i_intDeviceNumber, variable & o_strTime, variable & o_arrFltActualTemperatures[], variable & o_arrStrActualTempNames[] ) variable ;
  function ResetSingle( variable i_intDeviceNumber ) variable ;
  function SetupAllDevices( variable i_blnDisplayErrorDialogs, variable i_blnSimulation, variable i_strConfigurationFilePath ) variable ;
  function StopMethod( variable i_intDeviceNumber ) variable ;
  function TerminateAllDevices(  ) variable ;
  function TerminateSingle( variable i_intDeviceNumber ) variable ;
  function WaitForEndOfMethod( variable i_intDeviceNumber ) variable ;
  function WaitForEndOfMethodManual( variable i_intDeviceNumber, variable i_strPreheatMethod ) variable ;
  private function _README(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function ConnectSingle( variable i_intDeviceNumber, variable i_blnSimulation, variable i_blnDisplayErrorDialogs, variable i_strConfigurationFilePath ) variable {
    private variable l_strCommand;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_intReturn;
    private variable l_loopError;
    private object l_objFullJSON;
    private variable l_intJsonReturn;
    private object l_objJSONSingleODTC;
    private variable l_strComputerIP;
    private variable l_strDevicePort;
    private variable l_strDeviceIP;
    private dialog customDialog_1;
    private variable l_retValueDialog;
    private variable l_strErrorMessageDisplay;
    private variable l_intErrorMessageLength;
    private variable l_blnCheckInput;
    l_strCommand = Translate("Connect Single");
    t_strLibrary = Translate("Inheco_ODTC_SMT");
    t_strODTCConfigurationFilePath = i_strConfigurationFilePath;
    t_strDeviceIPKey = Translate("strDeviceIPAddress");
    t_strDeviceIDKey = Translate("intDeviceID");
    t_strPmsIDKey = Translate("strPMS_ID");
    t_strDevicePortKey = Translate("strDevicePort");
    t_strComputerIPKey = Translate("strComputerIP");
    t_strLockIDKey = Translate("strLockID");
    t_strTimeoutKey = Translate("intTimeout");
    t_strDurationKey = Translate("intRunDuration");
    t_strRequestIDKey = Translate("intRequestID");
    t_strLastErrorReturnKey = Translate("intLastErrorReturn");
    t_strLastErrorMessageKey = Translate("strLastErrorMessage");
    t_blnSimulation = i_blnSimulation;
    t_blnDisplayErrorDialogs = i_blnDisplayErrorDialogs;
    t_intNumberOfDevicesInConfig = 1;
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objFullJSON, t_strComputerIPKey, l_strComputerIP);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strComputerIPKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    t_intNumberOfDevicesInConfig = HSLJsonLib::GetArrayLength(l_objFullJSON, Translate("ODTCs"));
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strDeviceIPKey, l_strDeviceIP);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIPKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strDevicePortKey, l_strDevicePort);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDevicePortKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_blnCheckInput = Hamilton_DriverTools::CheckBool(i_blnSimulation, Translate("i_blnSimulation"), l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      return (1);
    }
    l_blnCheckInput = Hamilton_DriverTools::CheckBool(i_blnDisplayErrorDialogs, Translate("i_blnDisplayErrorDialogs"), l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      return (1);
    }
    l_intReturn = Inheco_ODTC::Standard::Connect(l_strComputerIP, l_strDeviceIP, l_strDevicePort, t_blnSimulation, l_intDeviceID, l_strMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intErrorMessageLength = StrGetLength(l_strMessage);
        if (l_intErrorMessageLength < 100)
        {
          l_strErrorMessageDisplay = l_strMessage;
        }
        else
        {
          l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
        }
        if (t_blnDisplayErrorDialogs == 1)
        {
          customDialog_1.InitCustomDialog("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");
          customDialog_1.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_1.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_1.ShowCustomDialog();
          l_retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objFullJSON, t_strComputerIPKey, l_strComputerIP);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strComputerIPKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strDeviceIPKey, l_strDeviceIP);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIPKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strDevicePortKey, l_strDevicePort);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDevicePortKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::Connect(l_strComputerIP, l_strDeviceIP, l_strDevicePort, t_blnSimulation, l_intDeviceID, l_strMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
      }
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error writing "), t_strDeviceIDKey, Translate(" to configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function CloseDoor( variable i_intDeviceNumber ) variable {
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_retValueDialog;
    private variable l_intJsonReturn;
    private variable l_intReturn;
    private variable l_loopError;
    private variable l_strErrorMessageDisplay;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_strLockID;
    private dialog customDialog_2;
    private variable l_strSilaMessage;
    private variable l_intEvaluteErrorReturn;
    private variable l_blnCheckInput;
    private variable l_intSilaReturnValue;
    l_strCommand = Translate("Operate Door");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::CloseDoor(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        l_intEvaluteErrorReturn = Inheco_ODTC::Standard::EvaluateError(l_intSilaReturnValue, l_strMessage);
        if (l_intEvaluteErrorReturn == 0)
        {
          l_strMessage = l_strSilaMessage;
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
        l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, l_intSilaReturnValue);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorReturnKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, l_strMessage);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorMessageKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        HSLJsonLib::Release(l_objFullJSON);
        HSLJsonLib::Release(l_objJSONSingleODTC);
        if (t_blnDisplayErrorDialogs == 1)
        {
          l_intErrorMessageLength = StrGetLength(l_strMessage);
          if (l_intErrorMessageLength < 100)
          {
            l_strErrorMessageDisplay = l_strMessage;
          }
          else
          {
            l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
          }
          customDialog_2.InitCustomDialog("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");
          customDialog_2.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_2.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_2.SetCustomDialogProperty( "textBlock7.Text", l_strMessage );
          customDialog_2.ShowCustomDialog();
          l_retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::CloseDoor(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Reset and Retry"));
          l_intReturn = TerminateSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ConnectSingle(i_intDeviceNumber, t_blnSimulation, t_blnDisplayErrorDialogs, t_strODTCConfigurationFilePath);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ResetSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = InitializeSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::CloseDoor(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function TerminateSingle( variable i_intDeviceNumber ) variable {
    private dialog customDialog_3;
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_intReturn;
    private variable l_retValueDialog;
    private variable l_intJsonReturn;
    private variable l_loopError;
    private variable l_strErrorMessageDisplay;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_blnCheckInput;
    l_strCommand = Translate("Terminate Single");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::Terminate(l_intDeviceID, l_strMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intErrorMessageLength = StrGetLength(l_strMessage);
        if (l_intErrorMessageLength < 100)
        {
          l_strErrorMessageDisplay = l_strMessage;
        }
        else
        {
          l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
        }
        if (t_blnDisplayErrorDialogs == 1)
        {
          customDialog_3.InitCustomDialog("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");
          customDialog_3.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_3.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_3.ShowCustomDialog();
          l_retValueDialog = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::Terminate(l_intDeviceID, l_strMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function TerminateAllDevices(  ) variable {
    private object l_objFullJSON;
    private variable l_intJsonReturn;
    private variable l_intReturn;
    private variable l_strCommand;
    private variable l_intNumberOfODTCs;
    private variable l_loopTerminateAll;
    l_strCommand = Translate("Terminate All Devices");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intNumberOfODTCs = HSLJsonLib::GetArrayLength(l_objFullJSON, Translate("ODTCs"));
    HSLJsonLib::Release(l_objFullJSON);
    {
      for(l_loopTerminateAll = 0; l_loopTerminateAll < l_intNumberOfODTCs;)
      {
        l_loopTerminateAll = l_loopTerminateAll + 1;
        l_intReturn = TerminateSingle(l_loopTerminateAll);
        if (l_intReturn > 0)
        {
          return (l_intReturn);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function SetupAllDevices( variable i_blnDisplayErrorDialogs, variable i_blnSimulation, variable i_strConfigurationFilePath ) variable {
    private object l_objFullJSON;
    private variable l_intJsonReturn;
    private variable l_intReturn;
    private variable l_intNumberOfODTCs;
    private variable l_strCommand;
    private variable l_loopConnectAll;
    private variable l_loopResetAll;
    private variable l_loopInitializeAll;
    l_strCommand = Translate("Setup All Devices");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intNumberOfODTCs = HSLJsonLib::GetArrayLength(l_objFullJSON, Translate("ODTCs"));
    HSLJsonLib::Release(l_objFullJSON);
    {
      for(l_loopConnectAll = 0; l_loopConnectAll < l_intNumberOfODTCs;)
      {
        l_loopConnectAll = l_loopConnectAll + 1;
        l_intReturn = ConnectSingle(l_loopConnectAll, i_blnSimulation, i_blnDisplayErrorDialogs, i_strConfigurationFilePath);
        if (l_intReturn > 0)
        {
          return (l_intReturn);
        }
      }
    }
    {
      for(l_loopResetAll = 0; l_loopResetAll < l_intNumberOfODTCs;)
      {
        l_loopResetAll = l_loopResetAll + 1;
        l_intReturn = ResetSingle(l_loopResetAll);
        if (l_intReturn > 0)
        {
          return (l_intReturn);
        }
      }
    }
    {
      for(l_loopInitializeAll = 0; l_loopInitializeAll < l_intNumberOfODTCs;)
      {
        l_loopInitializeAll = l_loopInitializeAll + 1;
        l_intReturn = InitializeSingle(l_loopInitializeAll);
        if (l_intReturn > 0)
        {
          return (l_intReturn);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function Abort( variable i_intDeviceNumber ) variable {
    private dialog customDialog_4;
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_strMessage;
    private variable l_retValueDialog;
    private variable l_intReturn;
    private variable l_intJsonReturn;
    private variable l_loopError;
    private variable l_strLockID;
    private variable l_strErrorMessageDisplay;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_intDeviceID;
    private variable l_strSilaMessage;
    private variable l_intEvaluteErrorReturn;
    private variable l_blnCheckInput;
    private variable l_intSilaReturnValue;
    l_strCommand = Translate("Abort");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::Abort(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        l_intEvaluteErrorReturn = Inheco_ODTC::Standard::EvaluateError(l_intSilaReturnValue, l_strMessage);
        if (l_intEvaluteErrorReturn == 0)
        {
          l_strMessage = l_strSilaMessage;
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
        l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, l_intSilaReturnValue);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorReturnKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, l_strMessage);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorMessageKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        HSLJsonLib::Release(l_objFullJSON);
        HSLJsonLib::Release(l_objJSONSingleODTC);
        if (t_blnDisplayErrorDialogs == 1)
        {
          l_intErrorMessageLength = StrGetLength(l_strMessage);
          if (l_intErrorMessageLength < 100)
          {
            l_strErrorMessageDisplay = l_strMessage;
          }
          else
          {
            l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
          }
          customDialog_4.InitCustomDialog("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");
          customDialog_4.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_4.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_4.SetCustomDialogProperty( "textBlock7.Text", l_strMessage );
          customDialog_4.ShowCustomDialog();
          l_retValueDialog = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::Abort(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Reset and Retry"));
          l_intReturn = TerminateSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ConnectSingle(i_intDeviceNumber, t_blnSimulation, t_blnDisplayErrorDialogs, t_strODTCConfigurationFilePath);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ResetSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = InitializeSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::Abort(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function DownloadProtocol( variable i_intDeviceNumber, variable i_strProtocolFile ) variable {
    private dialog customDialog_5;
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_intJsonReturn;
    private variable l_intReturn;
    private variable l_retValueDialog;
    private variable l_loopError;
    private variable l_strErrorMessageDisplay;
    private variable l_strLockID;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_strSilaMessage;
    private variable l_intEvaluteErrorReturn;
    private variable l_blnCheckInput;
    private variable l_intSilaReturnValue;
    l_strCommand = Translate("Download Protocol");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_blnCheckInput = Hamilton_DriverTools::CheckString(i_strProtocolFile, Translate("i_strProtocolFile"), l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::DownloadProtocol(l_intDeviceID, l_strLockID, i_strProtocolFile, l_intSilaReturnValue, l_strSilaMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        l_intEvaluteErrorReturn = Inheco_ODTC::Standard::EvaluateError(l_intSilaReturnValue, l_strMessage);
        if (l_intEvaluteErrorReturn == 0)
        {
          l_strMessage = l_strSilaMessage;
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
        l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, l_intSilaReturnValue);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorReturnKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, l_strMessage);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorMessageKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        HSLJsonLib::Release(l_objFullJSON);
        HSLJsonLib::Release(l_objJSONSingleODTC);
        if (t_blnDisplayErrorDialogs == 1)
        {
          l_intErrorMessageLength = StrGetLength(l_strMessage);
          if (l_intErrorMessageLength < 100)
          {
            l_strErrorMessageDisplay = l_strMessage;
          }
          else
          {
            l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
          }
          customDialog_5.InitCustomDialog("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");
          customDialog_5.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_5.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_5.SetCustomDialogProperty( "textBlock7.Text", l_strMessage );
          customDialog_5.ShowCustomDialog();
          l_retValueDialog = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::DownloadProtocol(l_intDeviceID, l_strLockID, i_strProtocolFile, l_intSilaReturnValue, l_strSilaMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Reset and Retry"));
          l_intReturn = TerminateSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ConnectSingle(i_intDeviceNumber, t_blnSimulation, t_blnDisplayErrorDialogs, t_strODTCConfigurationFilePath);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ResetSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = InitializeSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::DownloadProtocol(l_intDeviceID, l_strLockID, i_strProtocolFile, l_intSilaReturnValue, l_strSilaMessage);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function ExecuteMethod( variable i_intDeviceNumber, variable i_strMethodName, variable i_intPriority, variable & o_intDuration, variable & o_intRequestID ) variable {
    private dialog customDialog_6;
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_intReturn;
    private variable l_retValueDialog;
    private variable l_intJsonReturn;
    private variable l_loopError;
    private variable l_strLockID;
    private variable l_strErrorMessageDisplay;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_strSilaMessage;
    private variable l_intEvaluteErrorReturn;
    private variable l_blnCheckInput;
    private variable l_intSilaReturnValue;
    o_intDuration = 0;
    o_intRequestID = 0;
    l_strCommand = Translate("Execute Method");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_blnCheckInput = Hamilton_DriverTools::CheckString(i_strMethodName, Translate("i_strMethodName"), l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      return (1);
    }
    l_blnCheckInput = Hamilton_DriverTools::CheckInteger(i_intPriority, Translate("i_intPriority"), l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::ExecuteMethod(l_intDeviceID, l_strLockID, i_strMethodName, i_intPriority, o_intDuration, o_intRequestID, l_intSilaReturnValue, l_strSilaMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        l_intEvaluteErrorReturn = Inheco_ODTC::Standard::EvaluateError(l_intSilaReturnValue, l_strMessage);
        if (l_intEvaluteErrorReturn == 0)
        {
          l_strMessage = l_strSilaMessage;
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
        l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, l_intSilaReturnValue);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorReturnKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, l_strMessage);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorMessageKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        HSLJsonLib::Release(l_objFullJSON);
        HSLJsonLib::Release(l_objJSONSingleODTC);
        if (t_blnDisplayErrorDialogs == 1)
        {
          l_intErrorMessageLength = StrGetLength(l_strMessage);
          if (l_intErrorMessageLength < 100)
          {
            l_strErrorMessageDisplay = l_strMessage;
          }
          else
          {
            l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
          }
          customDialog_6.InitCustomDialog("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");
          customDialog_6.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_6.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_6.SetCustomDialogProperty( "textBlock7.Text", l_strMessage );
          customDialog_6.ShowCustomDialog();
          l_retValueDialog = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::ExecuteMethod(l_intDeviceID, l_strLockID, i_strMethodName, i_intPriority, o_intDuration, o_intRequestID, l_intSilaReturnValue, l_strSilaMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Reset and Retry"));
          l_intReturn = TerminateSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ConnectSingle(i_intDeviceNumber, t_blnSimulation, t_blnDisplayErrorDialogs, t_strODTCConfigurationFilePath);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ResetSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = InitializeSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::ExecuteMethod(l_intDeviceID, l_strLockID, i_strMethodName, i_intPriority, o_intDuration, o_intRequestID, l_intSilaReturnValue, l_strSilaMessage);
        }
      }
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strDurationKey, o_intDuration);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error writing "), t_strDurationKey, Translate(" to configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strRequestIDKey, o_intRequestID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error writing "), t_strRequestIDKey, Translate(" to configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function GetStatus( variable i_intDeviceNumber, variable & o_strDeviceID, variable & o_strState, variable & o_blnLocked, variable & o_strPmsID, variable & o_strCurrentTime ) variable {
    private dialog customDialog_7;
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_strSilaMessage;
    private variable l_retValueDialog;
    private variable l_intReturn;
    private variable l_intJsonReturn;
    private variable l_intEvaluteErrorReturn;
    private variable l_loopError;
    private variable l_strErrorMessageDisplay;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_blnCheckInput;
    private variable l_intSilaReturnValue;
    o_strDeviceID = 0;
    o_strState = 0;
    o_blnLocked = 0;
    o_strPmsID = 0;
    o_strCurrentTime = 0;
    l_strCommand = Translate("Get Status");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::GetStatus(l_intDeviceID, o_strDeviceID, o_strState, o_blnLocked, o_strPmsID, o_strCurrentTime, l_intSilaReturnValue, l_strSilaMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        l_intEvaluteErrorReturn = Inheco_ODTC::Standard::EvaluateError(l_intSilaReturnValue, l_strMessage);
        if (l_intEvaluteErrorReturn == 0)
        {
          l_strMessage = l_strSilaMessage;
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
        l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, l_intSilaReturnValue);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorReturnKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, l_strMessage);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorMessageKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        HSLJsonLib::Release(l_objFullJSON);
        HSLJsonLib::Release(l_objJSONSingleODTC);
        if (t_blnDisplayErrorDialogs == 1)
        {
          l_intErrorMessageLength = StrGetLength(l_strMessage);
          if (l_intErrorMessageLength < 100)
          {
            l_strErrorMessageDisplay = l_strMessage;
          }
          else
          {
            l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
          }
          customDialog_7.InitCustomDialog("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");
          customDialog_7.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_7.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_7.SetCustomDialogProperty( "textBlock7.Text", l_strMessage );
          customDialog_7.ShowCustomDialog();
          l_retValueDialog = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::GetStatus(l_intDeviceID, o_strDeviceID, o_strState, o_blnLocked, o_strPmsID, o_strCurrentTime, l_intSilaReturnValue, l_strSilaMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Reset and Retry"));
          l_intReturn = TerminateSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ConnectSingle(i_intDeviceNumber, t_blnSimulation, t_blnDisplayErrorDialogs, t_strODTCConfigurationFilePath);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ResetSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = InitializeSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::GetStatus(l_intDeviceID, o_strDeviceID, o_strState, o_blnLocked, o_strPmsID, o_strCurrentTime, l_intSilaReturnValue, l_strSilaMessage);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function InitializeSingle( variable i_intDeviceNumber ) variable {
    private dialog customDialog_8;
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_strSilaMessage;
    private variable l_intReturn;
    private variable l_retValueDialog;
    private variable l_intJsonReturn;
    private variable l_intEvaluteErrorReturn;
    private variable l_loopError;
    private variable l_strLockID;
    private variable l_strErrorMessageDisplay;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_blnCheckInput;
    private variable l_intSilaReturnValue;
    l_strCommand = Translate("Initialize");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::Initialize(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        l_intEvaluteErrorReturn = Inheco_ODTC::Standard::EvaluateError(l_intSilaReturnValue, l_strMessage);
        if (l_intEvaluteErrorReturn == 0)
        {
          l_strMessage = l_strSilaMessage;
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
        l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, l_intSilaReturnValue);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorReturnKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, l_strMessage);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorMessageKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        HSLJsonLib::Release(l_objFullJSON);
        HSLJsonLib::Release(l_objJSONSingleODTC);
        if (t_blnDisplayErrorDialogs == 1)
        {
          l_intErrorMessageLength = StrGetLength(l_strMessage);
          if (l_intErrorMessageLength < 100)
          {
            l_strErrorMessageDisplay = l_strMessage;
          }
          else
          {
            l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
          }
          customDialog_8.InitCustomDialog("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");
          customDialog_8.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_8.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_8.SetCustomDialogProperty( "textBlock7.Text", l_strMessage );
          customDialog_8.ShowCustomDialog();
          l_retValueDialog = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::Initialize(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Reset and Retry"));
          l_intReturn = TerminateSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ConnectSingle(i_intDeviceNumber, t_blnSimulation, t_blnDisplayErrorDialogs, t_strODTCConfigurationFilePath);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ResetSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::Initialize(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function ResetSingle( variable i_intDeviceNumber ) variable {
    private dialog customDialog_9;
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_intReturn;
    private variable l_strSilaMessage;
    private variable l_intJsonReturn;
    private variable l_retValueDialog;
    private variable l_intEvaluteErrorReturn;
    private variable l_loopError;
    private variable l_strErrorMessageDisplay;
    private variable l_strLockID;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_strDeviceID;
    private variable l_intTimeout;
    private variable l_strPMS_ID;
    private variable l_blnCheckInput;
    private variable l_intSilaReturnValue;
    l_strCommand = Translate("Reset");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_strDeviceID = StrConcat2(Translate("ODTC_"), i_intDeviceNumber);
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strPmsIDKey, l_strPMS_ID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strPmsIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strTimeoutKey, l_intTimeout);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strTimeoutKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::Reset(l_intDeviceID, t_blnSimulation, l_intTimeout, l_strLockID, l_strDeviceID, l_strPMS_ID, l_intSilaReturnValue, l_strSilaMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        l_intEvaluteErrorReturn = Inheco_ODTC::Standard::EvaluateError(l_intSilaReturnValue, l_strMessage);
        if (l_intEvaluteErrorReturn == 0)
        {
          l_strMessage = l_strSilaMessage;
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
        l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, l_intSilaReturnValue);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorReturnKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, l_strMessage);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorMessageKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        HSLJsonLib::Release(l_objFullJSON);
        HSLJsonLib::Release(l_objJSONSingleODTC);
        if (t_blnDisplayErrorDialogs == 1)
        {
          l_intErrorMessageLength = StrGetLength(l_strMessage);
          if (l_intErrorMessageLength < 100)
          {
            l_strErrorMessageDisplay = l_strMessage;
          }
          else
          {
            l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
          }
          customDialog_9.InitCustomDialog("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");
          customDialog_9.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_9.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_9.SetCustomDialogProperty( "textBlock7.Text", l_strMessage );
          customDialog_9.ShowCustomDialog();
          l_retValueDialog = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_strDeviceID = StrConcat2(Translate("ODTC_"), i_intDeviceNumber);
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strPmsIDKey, l_strPMS_ID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strPmsIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strTimeoutKey, l_intTimeout);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strTimeoutKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::Reset(l_intDeviceID, t_blnSimulation, l_intTimeout, l_strLockID, l_strDeviceID, l_strPMS_ID, l_intSilaReturnValue, l_strSilaMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Reset and Retry"));
          l_intReturn = TerminateSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ConnectSingle(i_intDeviceNumber, t_blnSimulation, t_blnDisplayErrorDialogs, t_strODTCConfigurationFilePath);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_strDeviceID = StrConcat2(Translate("ODTC_"), i_intDeviceNumber);
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strPmsIDKey, l_strPMS_ID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strPmsIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strTimeoutKey, l_intTimeout);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strTimeoutKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::Reset(l_intDeviceID, t_blnSimulation, l_intTimeout, l_strLockID, l_strDeviceID, l_strPMS_ID, l_intSilaReturnValue, l_strSilaMessage);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function ReadActualTemperature( variable i_intDeviceNumber, variable & o_strTime, variable & o_arrFltActualTemperatures[], variable & o_arrStrActualTempNames[] ) variable {
    private dialog customDialog_10;
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_strSilaMessage;
    private variable l_retValueDialog;
    private variable l_intReturn;
    private variable l_intJsonReturn;
    private variable l_intEvaluteErrorReturn;
    private variable l_loopError;
    private variable l_strErrorMessageDisplay;
    private variable l_strLockID;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_blnCheckInput;
    private variable l_intSilaReturnValue;
    o_strTime = 0;
    o_arrFltActualTemperatures.SetSize( 0);
    o_arrStrActualTempNames.SetSize( 0);
    l_strCommand = Translate("Read Actual Temperature");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::ReadActualTemperature(l_intDeviceID, l_strLockID, o_strTime, o_arrFltActualTemperatures, o_arrStrActualTempNames, l_intSilaReturnValue, l_strSilaMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        l_intEvaluteErrorReturn = Inheco_ODTC::Standard::EvaluateError(l_intSilaReturnValue, l_strMessage);
        if (l_intEvaluteErrorReturn == 0)
        {
          l_strMessage = l_strSilaMessage;
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
        l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, l_intSilaReturnValue);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorReturnKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, l_strMessage);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorMessageKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        HSLJsonLib::Release(l_objFullJSON);
        HSLJsonLib::Release(l_objJSONSingleODTC);
        if (t_blnDisplayErrorDialogs == 1)
        {
          l_intErrorMessageLength = StrGetLength(l_strMessage);
          if (l_intErrorMessageLength < 100)
          {
            l_strErrorMessageDisplay = l_strMessage;
          }
          else
          {
            l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
          }
          customDialog_10.InitCustomDialog("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");
          customDialog_10.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_10.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_10.SetCustomDialogProperty( "textBlock7.Text", l_strMessage );
          customDialog_10.ShowCustomDialog();
          l_retValueDialog = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::ReadActualTemperature(l_intDeviceID, l_strLockID, o_strTime, o_arrFltActualTemperatures, o_arrStrActualTempNames, l_intSilaReturnValue, l_strSilaMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Reset and Retry"));
          l_intReturn = TerminateSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ConnectSingle(i_intDeviceNumber, t_blnSimulation, t_blnDisplayErrorDialogs, t_strODTCConfigurationFilePath);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ResetSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = InitializeSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::ReadActualTemperature(l_intDeviceID, l_strLockID, o_strTime, o_arrFltActualTemperatures, o_arrStrActualTempNames, l_intSilaReturnValue, l_strSilaMessage);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function StopMethod( variable i_intDeviceNumber ) variable {
    private dialog customDialog_11;
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_retValueDialog;
    private variable l_strSilaMessage;
    private variable l_intReturn;
    private variable l_intJsonReturn;
    private variable l_intEvaluteErrorReturn;
    private variable l_loopError;
    private variable l_strErrorMessageDisplay;
    private variable l_strLockID;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_blnCheckInput;
    private variable l_intSilaReturnValue;
    l_strCommand = Translate("Stop Method");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::StopMethod(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        l_intEvaluteErrorReturn = Inheco_ODTC::Standard::EvaluateError(l_intSilaReturnValue, l_strMessage);
        if (l_intEvaluteErrorReturn == 0)
        {
          l_strMessage = l_strSilaMessage;
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
        l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, l_intSilaReturnValue);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorReturnKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, l_strMessage);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorMessageKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        HSLJsonLib::Release(l_objFullJSON);
        HSLJsonLib::Release(l_objJSONSingleODTC);
        if (t_blnDisplayErrorDialogs == 1)
        {
          l_intErrorMessageLength = StrGetLength(l_strMessage);
          if (l_intErrorMessageLength < 100)
          {
            l_strErrorMessageDisplay = l_strMessage;
          }
          else
          {
            l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
          }
          customDialog_11.InitCustomDialog("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");
          customDialog_11.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_11.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_11.SetCustomDialogProperty( "textBlock7.Text", l_strMessage );
          customDialog_11.ShowCustomDialog();
          l_retValueDialog = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::StopMethod(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Reset and Retry"));
          l_intReturn = TerminateSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ConnectSingle(i_intDeviceNumber, t_blnSimulation, t_blnDisplayErrorDialogs, t_strODTCConfigurationFilePath);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ResetSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = InitializeSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::StopMethod(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function WaitForEndOfMethod( variable i_intDeviceNumber ) variable {
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_strSilaMessage;
    private variable l_retValueDialog;
    private variable l_intReturn;
    private variable l_intJsonReturn;
    private variable l_intEvaluteErrorReturn;
    private variable l_loopError;
    private variable l_strErrorMessageDisplay;
    private variable l_strLockID;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_blnCheckInput;
    private dialog customDialog_12;
    private variable l_intSilaReturnValue;
    private variable l_intRequestID;
    private variable l_intRunDuration;
    l_strCommand = Translate("Wait for End of Method");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDurationKey, l_intRunDuration);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDurationKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strRequestIDKey, l_intRequestID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strRequestIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::WaitForEndOfExecuteMethod(l_intDeviceID, l_intRunDuration, l_intRequestID, l_intSilaReturnValue, l_strSilaMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        l_intEvaluteErrorReturn = Inheco_ODTC::Standard::EvaluateError(l_intSilaReturnValue, l_strMessage);
        if (l_intEvaluteErrorReturn == 0)
        {
          l_strMessage = l_strSilaMessage;
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
        l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
        l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
        l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, l_intSilaReturnValue);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorReturnKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, l_strMessage);
        if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorMessageKey, Translate(" to configuration file"), Translate(""));
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          return (1);
        }
        HSLJsonLib::Release(l_objFullJSON);
        HSLJsonLib::Release(l_objJSONSingleODTC);
        if (t_blnDisplayErrorDialogs == 1)
        {
          l_intErrorMessageLength = StrGetLength(l_strMessage);
          if (l_intErrorMessageLength < 100)
          {
            l_strErrorMessageDisplay = l_strMessage;
          }
          else
          {
            l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
          }
          customDialog_12.InitCustomDialog("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");
          customDialog_12.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
          customDialog_12.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
          customDialog_12.SetCustomDialogProperty( "textBlock7.Text", l_strMessage );
          customDialog_12.ShowCustomDialog();
          l_retValueDialog = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
        }
        else
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDurationKey, l_intRunDuration);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDurationKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strRequestIDKey, l_intRequestID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strRequestIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::WaitForEndOfExecuteMethod(l_intDeviceID, l_intRunDuration, l_intRequestID, l_intSilaReturnValue, l_strSilaMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Reset and Retry"));
          l_intReturn = TerminateSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ConnectSingle(i_intDeviceNumber, t_blnSimulation, t_blnDisplayErrorDialogs, t_strODTCConfigurationFilePath);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ResetSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = InitializeSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDurationKey, l_intRunDuration);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDurationKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strRequestIDKey, l_intRequestID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strRequestIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::WaitForEndOfExecuteMethod(l_intDeviceID, l_intRunDuration, l_intRequestID, l_intSilaReturnValue, l_strSilaMessage);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function OpenDoor( variable i_intDeviceNumber ) variable {
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intDeviceID;
    private variable l_strMessage;
    private variable l_strSilaMessage;
    private variable l_retValueDialog;
    private variable l_intReturn;
    private variable l_intJsonReturn;
    private variable l_intEvaluteErrorReturn;
    private variable l_loopError;
    private variable l_strErrorMessageDisplay;
    private variable l_strLockID;
    private variable l_strCommand;
    private variable l_intErrorMessageLength;
    private variable l_blnCheckInput;
    private dialog customDialog_13;
    private variable l_intSilaReturnValue;
    l_strCommand = Translate("Open Door");
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intReturn = Inheco_ODTC::Standard::OpenDoor(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
    {
      l_loopError = 0;
      while (l_intReturn == 0)
      {
        l_loopError = l_loopError + 1;
        if (l_loopError == 1)
        {
          l_retValueDialog = ASWGLOBAL::DIALOG::YES;
        }
        else
        {
          l_intEvaluteErrorReturn = Inheco_ODTC::Standard::EvaluateError(l_intSilaReturnValue, l_strMessage);
          if (l_intEvaluteErrorReturn == 0)
          {
            l_strMessage = l_strSilaMessage;
          }
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("Error Description: "), l_strMessage);
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::SetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, l_intSilaReturnValue);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorReturnKey, Translate(" to configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::SetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, l_strMessage);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error setting "), t_strLastErrorMessageKey, Translate(" to configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          if (t_blnDisplayErrorDialogs == 1)
          {
            l_intErrorMessageLength = StrGetLength(l_strMessage);
            if (l_intErrorMessageLength < 100)
            {
              l_strErrorMessageDisplay = l_strMessage;
            }
            else
            {
              l_strErrorMessageDisplay = StrConcat4(Translate("Could not "), l_strCommand, Translate(". Check log file for more information"), Translate(""));
            }
            customDialog_13.InitCustomDialog("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");
            customDialog_13.SetCustomDialogProperty( "textBlock3.Text", t_strLibrary );
            customDialog_13.SetCustomDialogProperty( "textBlock5.Text", l_strCommand );
            customDialog_13.SetCustomDialogProperty( "textBlock7.Text", l_strMessage );
            customDialog_13.ShowCustomDialog();
            l_retValueDialog = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
          }
          else
          {
            l_retValueDialog = ASWGLOBAL::DIALOG::CANCEL;
          }
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Cancel"));
          return (1);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::RETRY)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Retry"));
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::OpenDoor(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::IGNORE)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Ignore"));
          break;
        }
        if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), l_strMessage, Translate(" - Recovery: Reset and Retry"));
          l_intReturn = TerminateSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ConnectSingle(i_intDeviceNumber, t_blnSimulation, t_blnDisplayErrorDialogs, t_strODTCConfigurationFilePath);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = ResetSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intReturn = InitializeSingle(i_intDeviceNumber);
          if (l_intReturn > 0)
          {
            return (l_intReturn);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
          l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
          l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
          if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
            HSLJsonLib::Release(l_objFullJSON);
            HSLJsonLib::Release(l_objJSONSingleODTC);
            return (1);
          }
          HSLJsonLib::Release(l_objFullJSON);
          HSLJsonLib::Release(l_objJSONSingleODTC);
          l_intReturn = Inheco_ODTC::Standard::OpenDoor(l_intDeviceID, l_strLockID, l_intSilaReturnValue, l_strSilaMessage);
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  function WaitForEndOfMethodManual( variable i_intDeviceNumber, variable i_strPreheatMethod ) variable {
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_strRequestPMSId;
    private variable l_intDeviceID;
    private variable l_strRequestDeviceID;
    private variable l_strRequestState;
    private variable l_intJsonReturn;
    private variable l_strRequestCurrentTime;
    private variable l_blnRequestLocked;
    private variable l_strLockID;
    private variable l_strCommand;
    private variable l_intReturnValue;
    private variable l_intCurrentTime;
    private variable l_intTimeout;
    private variable l_loopCheckDevice;
    private timer l_hdlTimeoutTimer;
    private timer l_hdlLoopDelayTimer;
    private variable l_intDuration;
    private variable l_intRequestID;
    private variable l_intReturn;
    private variable l_intRunDuration;
    l_strCommand = Translate("Wait for End of Method Manual");
    l_intTimeout = l_intRunDuration + 10;
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("START"), Translate(""));
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDeviceIDKey, l_intDeviceID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDeviceIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLockIDKey, l_strLockID);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLockIDKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strDurationKey, l_intRunDuration);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strDurationKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    l_intTimeout = l_intRunDuration + 10;
    if( 0 == l_hdlTimeoutTimer.SetTimer(l_intTimeout) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      l_loopCheckDevice = 0;
      while (0 == 0)
      {
        l_loopCheckDevice = l_loopCheckDevice + 1;
        if (t_blnSimulation == ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("IN SIMULATION"), Translate(""));
          l_intReturnValue = 0;
          break;
        }
        l_intReturn = GetStatus(i_intDeviceNumber, l_strRequestDeviceID, l_strRequestState, l_blnRequestLocked, l_strRequestPMSId, l_strRequestCurrentTime);
        if (l_intReturn > 0)
        {
          return (l_intReturn);
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("ODTC State Check: "), l_strRequestState);
        if (l_strRequestState == "inError")
        {
          ResetSingle(i_intDeviceNumber);
          InitializeSingle(i_intDeviceNumber);
          if (i_strPreheatMethod != "")
          {
            ExecuteMethod(i_intDeviceNumber, i_strPreheatMethod, 10000, l_intDuration, l_intRequestID);
          }
        }
        if (l_strRequestState == "idle")
        {
          l_intReturnValue = 0;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("ODTC Status Change. WaitForEndOFMethodManual Return: "), l_intReturnValue);
          break;
        }
        l_intCurrentTime = l_hdlTimeoutTimer.GetElapsedTime();
        if (l_intCurrentTime >= l_intTimeout)
        {
          l_intReturnValue = 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("ODTC Timeout. WaitForEndOFMethodManual Return: "), l_intReturnValue);
          break;
        }
        else
        {
          if( 0 == l_hdlLoopDelayTimer.SetTimer(5) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_hdlLoopDelayTimer.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (l_intReturnValue);
  }

  function EvaluateError( variable i_intDeviceNumber, variable & o_intErrorReturn, variable & o_strErrorMessage ) variable {
    private variable l_strCommand;
    private object l_objFullJSON;
    private object l_objJSONSingleODTC;
    private variable l_intJsonReturn;
    private variable l_blnCheckInput;
    o_intErrorReturn = 0;
    o_strErrorMessage = 0;
    l_strCommand = Translate("Evaluate Error");
    l_blnCheckInput = Hamilton_DriverTools::CheckIntegerRange(i_intDeviceNumber, Translate("i_intDeviceNumber"), 1, t_intNumberOfDevicesInConfig, l_strCommand, t_strLibrary);
    if (l_blnCheckInput == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - Error: "), Translate("Parameter out of range. Configuration file does not contain that many devices"), Translate(""));
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objFullJSON);
    l_intJsonReturn = HSLJsonLib::Load(l_objFullJSON, t_strODTCConfigurationFilePath);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error loading configuration file: "), t_strODTCConfigurationFilePath, Translate(""), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::Create(l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetJsonArrayElement(l_objFullJSON, Translate("ODTCs"), i_intDeviceNumber, l_objJSONSingleODTC);
    l_intJsonReturn = HSLJsonLib::GetIntegerProperty(l_objJSONSingleODTC, t_strLastErrorReturnKey, o_intErrorReturn);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLastErrorReturnKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    l_intJsonReturn = HSLJsonLib::GetStringProperty(l_objJSONSingleODTC, t_strLastErrorMessageKey, o_strErrorMessage);
    if (l_intJsonReturn != ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error pulling "), t_strLastErrorMessageKey, Translate(" from configuration file"), Translate(""));
      HSLJsonLib::Release(l_objFullJSON);
      HSLJsonLib::Release(l_objJSONSingleODTC);
      return (1);
    }
    HSLJsonLib::Release(l_objFullJSON);
    HSLJsonLib::Release(l_objJSONSingleODTC);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, t_strLibrary, Translate(" - "), l_strCommand, Translate(" - "), Translate("COMPLETE"), Translate(""));
    return (0);
  }

  private function _README(  ) void {
  }
} // library namespace
