<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <PreMethod methodName="Test_Init_384" description="Init method for device testing " dateTime="2021-02-05T14:28:08.9228588-08:00">
    <TargetBlockTemperature>30</TargetBlockTemperature>
    <TargetLidTemp>115</TargetLidTemp>
  </PreMethod>
  <PreMethod methodName="Test_Init_96" description="Init method for testing 96w ODTCs" dateTime="2021-02-05T14:30:10.7066739-08:00">
    <TargetBlockTemperature>30</TargetBlockTemperature>
    <TargetLidTemp>110</TargetLidTemp>
  </PreMethod>
  <Method methodName="TestMethod_384w_30C1min_50C1min" description="Method for testing 384w ODTC. Heats at 30C for 1 min and then ramps to 50C for 1 min." dateTime="2021-02-05T14:32:04.3144563-08:00">
    <Variant>3840000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>-1</FluidQuantity>
    <PostHeating>false</PostHeating>
    <StartBlockTemperature>30</StartBlockTemperature>
    <StartLidTemperature>115</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>2</Slope>
      <PlateauTemperature>30</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>1</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>2</Slope>
      <PlateauTemperature>50</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>1</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>100</PHeating>
        <PCooling>100</PCooling>
        <IHeating>250</IHeating>
        <ICooling>150</ICooling>
        <DHeating>0</DHeating>
        <DCooling>0</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="TestMethod_96w_30C1min_50C1min" description="Method for testing 96w ODTC. Heats to 30C for 1min and then ramps to 50C for 1min." dateTime="2021-02-05T14:34:57.9297262-08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>false</PostHeating>
    <StartBlockTemperature>30</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>2</Slope>
      <PlateauTemperature>30</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>1</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>2</Slope>
      <PlateauTemperature>50</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>8.9</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>1</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>