#pragma once
#include "HSLSiasCentrifuge.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace SIASCENTRIFUGE {
  private function Abstract(  ) void ;
  function CloseDoor( variable i_intModuleID, variable i_intErrorRecovery ) variable ;
  function Initialize( variable i_intModuleID, variable i_strModuleName, variable i_intErrorRecovery ) variable ;
  function MoveToPosition( variable i_intModuleID, variable i_intPositionNumber, variable i_intErrorRecovery ) variable ;
  function SetSimulationMode( variable blnSimulate ) variable ;
  function Spin( variable i_intModuleID, variable i_intDuration, variable i_intSpeed, variable i_intAcceleration, variable i_intErrorRecovery ) variable ;
  function SpinDifferentSpeeds( variable i_intModuleID, variable & i_arrDurations[], variable & i_arrSpeeds[], variable & i_arrAccelerations[], variable i_intErrorRecovery ) variable ;
  function Terminate( variable i_intModuleID ) variable ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Initialize( variable i_intModuleID, variable i_strModuleName, variable i_intErrorRecovery ) variable {
    private variable strFunctionName;
    private variable intReturnValue;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Release_Trace4("===== ", strFunctionName, " =====", "");
    TRACELEVEL::Release_Trace2(" i_intModuleID ", i_intModuleID);
    TRACELEVEL::Release_Trace2(i_strModuleName, i_strModuleName);
    intReturnValue = HSLSiasCentrifuge::Initialize(i_intModuleID, i_strModuleName);
    if (i_intErrorRecovery == HSLSiasCentrifuge::Enums::ErrorRecovery::Retry)
    {
      if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
      {
        HSLSiasCentrifuge::Terminate(i_intModuleID);
        intReturnValue = HSLSiasCentrifuge::Initialize(i_intModuleID, i_strModuleName);
      }
    }
    TRACELEVEL::Release_Trace2(" Returnvalue ", intReturnValue);
    return (intReturnValue);
  }

  function Terminate( variable i_intModuleID ) variable {
    private variable strFunctionName;
    private variable intReturnValue;
    private variable i_intErrorRecovery;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Release_Trace4("===== ", strFunctionName, " =====", "");
    TRACELEVEL::Release_Trace2(" i_intModuleID ", i_intModuleID);
    intReturnValue = HSLSiasCentrifuge::Terminate(i_intModuleID);
    TRACELEVEL::Release_Trace2(" Returnvalue ", intReturnValue);
    return (intReturnValue);
  }

  function MoveToPosition( variable i_intModuleID, variable i_intPositionNumber, variable i_intErrorRecovery ) variable {
    private variable strFunctionName;
    private variable intReturnValue;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Release_Trace4("===== ", strFunctionName, " =====", "");
    TRACELEVEL::Release_Trace2(" i_intModuleID ", i_intModuleID);
    TRACELEVEL::Release_Trace2(" i_intPositionNumber ", i_intPositionNumber);
    i_intPositionNumber = i_intPositionNumber - 1;
    intReturnValue = HSLSiasCentrifuge::MoveToPosition(i_intModuleID, i_intPositionNumber);
    if (i_intErrorRecovery == HSLSiasCentrifuge::Enums::ErrorRecovery::Retry)
    {
      if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
      {
        HSLSiasCentrifuge::Reinit(i_intModuleID);
        intReturnValue = HSLSiasCentrifuge::MoveToPosition(i_intModuleID, i_intPositionNumber);
      }
    }
    TRACELEVEL::Release_Trace2(" Returnvalue ", intReturnValue);
    return (intReturnValue);
  }

  function CloseDoor( variable i_intModuleID, variable i_intErrorRecovery ) variable {
    private variable strFunctionName;
    private variable intReturnValue;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Release_Trace4("===== ", strFunctionName, " =====", "");
    TRACELEVEL::Release_Trace2(" i_intModuleID ", i_intModuleID);
    intReturnValue = HSLSiasCentrifuge::CloseCover(i_intModuleID);
    if (i_intErrorRecovery == HSLSiasCentrifuge::Enums::ErrorRecovery::Retry)
    {
      if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
      {
        HSLSiasCentrifuge::Reinit(i_intModuleID);
        intReturnValue = HSLSiasCentrifuge::CloseCover(i_intModuleID);
      }
    }
    TRACELEVEL::Release_Trace2(" Returnvalue ", intReturnValue);
    return (intReturnValue);
  }

  private function Abstract(  ) void {
  }

  function Spin( variable i_intModuleID, variable i_intDuration, variable i_intSpeed, variable i_intAcceleration, variable i_intErrorRecovery ) variable {
    private variable strFunctionName;
    private variable intReturnValue;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Release_Trace4("===== ", strFunctionName, " =====", "");
    TRACELEVEL::Release_Trace2(" i_intModuleID ", i_intModuleID);
    TRACELEVEL::Release_Trace2(" i_intDuration ", i_intDuration);
    TRACELEVEL::Release_Trace2(" i_intSpeed ", i_intSpeed);
    TRACELEVEL::Release_Trace2(" i_intAcceleration ", i_intAcceleration);
    intReturnValue = HSLSiasCentrifuge::TimeMove(i_intModuleID, i_intDuration, i_intSpeed, i_intAcceleration);
    if (i_intErrorRecovery == HSLSiasCentrifuge::Enums::ErrorRecovery::Retry)
    {
      if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
      {
        HSLSiasCentrifuge::Reinit(i_intModuleID);
        intReturnValue = HSLSiasCentrifuge::TimeMove(i_intModuleID, i_intDuration, i_intSpeed, i_intAcceleration);
      }
    }
    TRACELEVEL::Release_Trace2(" Returnvalue ", intReturnValue);
    return (intReturnValue);
  }

  function SpinDifferentSpeeds( variable i_intModuleID, variable & i_arrDurations[], variable & i_arrSpeeds[], variable & i_arrAccelerations[], variable i_intErrorRecovery ) variable {
    private variable strFunctionName;
    private variable intReturnValue;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Release_Trace4("===== ", strFunctionName, " =====", "");
    TRACELEVEL::Release_Trace2(" i_intModuleID ", i_intModuleID);
    TRACELEVEL::Release_TraceArray(i_arrSpeeds, Translate(" i_arrSpeeds "));
    TRACELEVEL::Release_TraceArray(i_arrDurations, Translate(" i_arrDurations "));
    TRACELEVEL::Release_TraceArray(i_arrAccelerations, Translate(" i_arrAccelerations "));
    intReturnValue = HSLSiasCentrifuge::TimeMoveExtended(i_intModuleID, i_arrDurations, i_arrSpeeds, i_arrAccelerations);
    if (i_intErrorRecovery == HSLSiasCentrifuge::Enums::ErrorRecovery::Retry)
    {
      if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
      {
        HSLSiasCentrifuge::Reinit(i_intModuleID);
        intReturnValue = HSLSiasCentrifuge::TimeMoveExtended(i_intModuleID, i_arrDurations, i_arrSpeeds, i_arrAccelerations);
      }
    }
    TRACELEVEL::Release_Trace2(" Returnvalue ", intReturnValue);
    return (intReturnValue);
  }

  function SetSimulationMode( variable blnSimulate ) variable {
    private variable strFunctionName;
    private variable intReturnValue;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Release_Trace4("===== ", strFunctionName, " =====", "");
    intReturnValue = HSLSiasCentrifuge::SetSimulationMode(blnSimulate);
    TRACELEVEL::Release_Trace2(" Returnvalue ", intReturnValue);
    return (intReturnValue);
  }
} // library namespace
