#pragma once
#include "HSLSeqLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HSL_SEQDAILYTOOLS {
  function CopyPlatePattern96ToTipRack( sequence plateSource, sequence & tipRack ) void ;
  function CopyPlatePatternToPlate( sequence plateSource, sequence & plateTarget ) void ;
  function GetNumberOfPositionsLeft( sequence seq, variable & numberOfPositionsLeft ) void ;
  function SeqEasyEdit( sequence & seq, variable timeout, variable dialog_title, variable dialog_msg, device & ML_STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function SeqEasyEdit( sequence & seq, variable timeout, variable dialog_title, variable dialog_msg, device & ML_STAR ) void {
    private variable seqTotal;
    seqTotal = SeqGetTotal(seq);
    SeqEdit(seq, ML_STAR, dialog_title, dialog_msg, timeout, 0, 1, seqTotal, 1, Translate(""));
  }

  function CopyPlatePatternToPlate( sequence plateSource, sequence & plateTarget ) void {
    private variable labID;
    private variable posID;
    private variable loopCounter1;
    plateSource.SetCurrentPosition(1);
    plateTarget.SetCurrentPosition(1);
    labID = SeqGetLabwareId(plateTarget);
    SeqRemoveAll(plateTarget);
    {
      loopCounter1 = 0;
      while (
         (plateSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, plateSource, 1);
        loopCounter1 = loopCounter1 + 1;
        posID = SeqGetPositionId(plateSource);
        SeqAdd(plateTarget, labID, posID);
        SeqIncrement(plateSource, 1);
        if (
           (plateSource.GetCurrentPosition() > 0 && plateSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      plateSource.SetMax(plateSource.GetTotal());
      plateSource.SetCurrentPosition(1);
    }
    plateTarget.SetCurrentPosition(1);
  }

  function CopyPlatePattern96ToTipRack( sequence plateSource, sequence & tipRack ) void {
    private variable posID;
    private variable loopCounter1;
    private variable arr_rows[];
    private variable labID_plate;
    private variable labID_tips;
    private sequence plateSource_full;
    private variable row;
    private variable position;
    private variable loopCounter2;
    private variable position_str;
    private variable loopCounter3;
    plateSource.SetCurrentPosition(1);
    tipRack.SetCurrentPosition(1);
    arr_rows.SetSize(0);
    arr_rows.AddAsLast(Translate("A"));
    arr_rows.AddAsLast(Translate("B"));
    arr_rows.AddAsLast(Translate("C"));
    arr_rows.AddAsLast(Translate("D"));
    arr_rows.AddAsLast(Translate("E"));
    arr_rows.AddAsLast(Translate("F"));
    arr_rows.AddAsLast(Translate("G"));
    arr_rows.AddAsLast(Translate("H"));
    labID_plate = SeqGetLabwareId(plateSource);
    SeqCopySequence(plateSource_full, plateSource);
    SeqRemoveAll(plateSource_full);
    {
      for(loopCounter2 = 0; loopCounter2 < 12;)
      {
        loopCounter2 = loopCounter2 + 1;
        {
          for(loopCounter3 = 0; loopCounter3 < 8;)
          {
            loopCounter3 = loopCounter3 + 1;
            row=arr_rows.GetAt(loopCounter3-1);
            posID = StrConcat2(row, loopCounter2);
            SeqAdd(plateSource_full, labID_plate, posID);
          }
        }
      }
    }
    labID_tips = SeqGetLabwareId(tipRack);
    SeqRemoveAll(tipRack);
    {
      loopCounter1 = 0;
      while (
         (plateSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, plateSource, 1);
        loopCounter1 = loopCounter1 + 1;
        posID = SeqGetPositionId(plateSource);
        position = SeqLookupPosition(plateSource_full, labID_plate, posID, 1, 1);
        position_str = StrIStr(position);
        SeqAdd(tipRack, labID_tips, position_str);
        SeqIncrement(plateSource, 1);
        if (
           (plateSource.GetCurrentPosition() > 0 && plateSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      plateSource.SetMax(plateSource.GetTotal());
      plateSource.SetCurrentPosition(1);
    }
    tipRack.SetCurrentPosition(1);
  }

  function GetNumberOfPositionsLeft( sequence seq, variable & numberOfPositionsLeft ) void {
    private variable currentPos;
    private variable endPos;
    numberOfPositionsLeft = 0;
    currentPos = seq.GetCurrentPosition();
    endPos = seq.GetCount();
    numberOfPositionsLeft = endPos - currentPos;
    numberOfPositionsLeft = numberOfPositionsLeft + 1;
  }
} // library namespace
