#pragma once
#include "HSLSeqLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLMthLib.hsl"
#include "VirtualLabware\\VirtualLabware.hsl"
#include "HSLTrcLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTipCountingLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLTimLib.hsl"
#include "NGS\\10X\\Library\\MLSTARLiquidClassLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLUtilLib2.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLDevLib.hsl"
#include "HSLErrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLSTCCLib.hs_"

namespace _10XPROCESSES {
  variable NumberOfCompleteColumns;
  variable RemainingWells;
  sequence seq_Tips50;
  sequence seq_Tips1000;
  sequence seq_Tips300;
  variable intStartPositionTip50;
  variable intStartPositionTip300;
  variable intStartPositionTip1000;
  sequence seq_COREGripper;
  timer ProccessTimer;
  variable _blnSimulationModeON;
  variable strTipCounterNameTip50;
  variable strTipCounterNameTip300;
  variable strTipCounterNameTip1000;
  variable _strFullPathReportFile;
  variable InsuffientTips;
  variable _intConsumedTips1000;
  variable _intConsumedTips300;
  variable _intConsumedTips50;
  variable _intMaxSeqTips1000AfterEdit;
  variable _intMaxSeqTips300AfterEdit;
  variable _intMaxSeqTips50AfterEdit;
  variable _intConsumedTips300BeforeRelaodTips;
  variable _intConsumedTips1000BeforeRelaodTips;
  variable _intConsumedTips50BeforeRelaodTips;
  variable _intTotalConsumedTips50;
  variable _intTotalConsumedTips1000;
  variable _intTotalConsumedTips300;
  sequence seq_Tips5ml;
  variable strTipCounterNameTip5ml;
  variable _intConsumedTips5mlBeforeRelaodTips;
  variable _intConsumedTips5ml;
  variable _intMaxSeqTips5mlAfterEdit;
  variable strTipCounterNameTipRocket;
  variable intStartPositionTipRocket;
  variable _intTotalConsumedTipsRocket;
  variable _intConsumedTipsRocketBeforeRelaodTips;
  variable intStartPositionTip5ml;
  variable _intTotalConsumedTips5ml;
  variable _intConsumedTipsRocket;
  sequence seq_TipsRocket;
  private function Abstract(  ) void ;
  function DATA_CheckPlatesInStacks( device & ML_STAR, sequence & seq_Stack1, sequence & seq_Stack2, variable var_Stack1Expected, variable var_Stack2Expected, variable & var_Result, variable & msg_Result ) void ;
  function DATA_HandoverSequencesAndDataToSMT( sequence & i_seqTip50Filter, sequence & i_seqTip300Filter, sequence & i_seqTipRocket, sequence & i_seqTip1000Filter, sequence & i_seqTip5mlFilter, sequence & i_seqCOREGripper, variable i_blnSimulationON, variable i_strKitName ) void ;
  function DATA_IncubationTimer( timer & i_strIncubationTimerName, variable i_intTime ) void ;
  function DATA_OverdryingProtection( timer & i_strOverdryingTimerName, variable i_intIncubationTimeForTheFollowingStep, variable i_blnStartNewTimer, variable & o_intIncubationTimeForTheFollowingStepModified ) void ;
  function DATA_TipCounterRead( device & ML_STAR, variable var_Tip50_required, variable var_Tip300_required, variable var_TipRocket_required, variable var_Tip1000_required, variable var_Tip5ml_required, variable var_TipTypeToBeProcessed, variable bln_AlwaysEditTipcounter, variable bln_ShowGUITipAndTimeCalculation ) void ;
  function DATA_TipCounterWrite( device & ML_STAR ) void ;
  function PIP_BeadsFromTroughToPlateAndTransfer( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TransferPosition, variable i_fltVolBeads, variable i_fltVolTransfer, variable i_strLiquidClassNameTransfer, sequence seq_Mixing, variable i_intBeadTroughMixVolume, variable i_mixCycles, variable i_mixVolume ) void ;
  function PIP_BeadsFromTroughtAtSetHeightToPlateAndTransfer( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TransferPosition, variable i_fltVolBeads, variable i_fltVolTransfer, variable i_strLiquidClassNameTransfer, sequence seq_Mixing, variable i_intBeadTroughMixVolume, variable i_mixCycles, variable i_mixVolume, variable i_fltBeadPipettingHeight ) void ;
  function PIP_BeadsFromTubesOrTroughToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolBeads, variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, sequence seq_Mixing, variable i_intBeadTroughMixVolume, variable i_mixCycles, variable i_mixVolume ) void ;
  function PIP_CherryPickFromPlateToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable & i_arrVolume[], variable i_strLiquidClassNameTransfer ) void ;
  function PIP_CherryPickFromPlateToPlate50ulTip( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable & i_arrVolume[], variable i_strLiquidClassNameTransfer ) void ;
  function PIP_CherryPickFromPlateToPlate50ulfilterTip( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable & i_arrVolume[], variable i_strLiquidClassNameTransfer ) void ;
  function PIP_Eluate_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void ;
  function PIP_ElutionBuffer_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMix ) void ;
  function PIP_ElutionBuffer_AtSetHeight_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMix, variable i_fltAspirationHeight ) void ;
  function PIP_EtOH_HVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_strLiquidClassNameTransfer, variable & var_TrackingEthanolVolume, variable i_intEthanolVolume ) void ;
  function PIP_EthanolRemoval_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void ;
  function PIP_Ethanol_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void ;
  function PIP_Liquid_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMix ) void ;
  function PIP_Normalize_LVFTForSampleTransferSVFTForBufferTransfer( device & ML_STAR, variable i_strNormalizationFile, sequence & io_seqBuffer, sequence & io_seqSourcePlate, sequence & io_seqDestinationPlate, variable i_strLiquidClassNameTransferBUFFER, variable i_strLiquidClassNameTransferSAMPLE, sequence & io_seqPlateSeqForJustBuffer, sequence & io_seqPoolingPlate ) void ;
  function PIP_OIL_LVFTSingleDispenseFromTroughToPlate( device & ML_STAR, sequence & seq_HSP, sequence & seq_Oil ) void ;
  function PIP_Pool_LVFT_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & i_seq_NormPlate, sequence & i_seq_PoolingPlate, variable i_strLiquidClassNameTransfer, variable & i_str_NormalizationFile ) void ;
  function PIP_ReagentsFromTubeOrTroughToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable & i_arrVolumes[], variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, variable i_intMixCycles, variable i_fltVolumeMix, variable i_fltDispenseHeightFromBottom, variable i_blnUseUpToFourVials, variable i_blnLiquidFollowDispense ) void ;
  function PIP_SPRIBeadSupernatantRemoval_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void ;
  function PIP_SupernatantRemoval_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void ;
  function PIP_TransferSamples_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable & i_arrVolumes[], variable i_intDispenseHeight, variable i_intMixCyclesOnDispense, variable i_intMixingVolume ) void ;
  function Trp_HSPwithCOREGripper( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, variable var_TrackToReadBC, variable var_ParkAfterMove, variable & o_strReadCurrentBarcode, variable i_intPlateType ) void ;
  function Trp_MIDIwithCOREGripper( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, variable var_TrackToReadBC, variable var_ParkAfterMove, variable & o_strReadCurrentBarcode ) void ;
  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense ) void ;
  private function _DATA_GetTipTypeAndDispenseModeOfLiquidClass( variable i_strLiquidClassName, variable & o_intTiptype, variable & o_intDispenseMode ) void ;
  private function _DATA_InterpreteLabwareID( variable i_strLabwareIDToBeAnalysed, variable & o_strTypeOfLabware ) void ;
  private function _DATA_PlausibilityCheckVolume( variable i_fltVolumeToBeChecked, variable i_intTipTypeToBeChecked ) void ;
  private function _DATA_TipAndTimeConsumption( variable bln_ShowDialog ) void ;
  private function _PIP_HVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void ;
  private function _PIP_SVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_fltDispenseHeightFromBottom ) void ;
  private function _Version(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  private function _DATA_InterpreteLabwareID( variable i_strLabwareIDToBeAnalysed, variable & o_strTypeOfLabware ) void {
    private variable intLabwareTypeIsAHSPLate;
    private variable intLabwareTypeIsATrough;
    private variable intLabwareTypeIsAMIDILate;
    o_strTypeOfLabware = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod: _DATA_InterpreteLabwareID <<<<<<<<<<"));
    intLabwareTypeIsAHSPLate = StrFind(i_strLabwareIDToBeAnalysed, Translate("HSP"));
    intLabwareTypeIsAMIDILate = StrFind(i_strLabwareIDToBeAnalysed, Translate("MIDI"));
    intLabwareTypeIsATrough = StrFind(i_strLabwareIDToBeAnalysed, Translate("RGT"));
    if (intLabwareTypeIsATrough >= 0)
    {
      o_strTypeOfLabware = Translate("trough");
    }
    else
    {
      if (intLabwareTypeIsAHSPLate >= 0)
      {
        o_strTypeOfLabware = Translate("plate");
      }
      else
      {
        if (intLabwareTypeIsAMIDILate >= 0)
        {
          o_strTypeOfLabware = Translate("plate");
        }
        else
        {
          o_strTypeOfLabware = Translate("tube");
        }
      }
    }
    Trace ("Labware ID to be analyzed :  ", i_strLabwareIDToBeAnalysed, " , Labware type used = ", o_strTypeOfLabware);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: _DATA_InterpreteLabwareID <<<<<<<<<<\n"));
  }

  function PIP_Pool_LVFT_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & i_seq_NormPlate, sequence & i_seq_PoolingPlate, variable i_strLiquidClassNameTransfer, variable & i_str_NormalizationFile ) void {
    private variable loopCounter1;
    private variable WellsInPoolingPlate;
    private variable SamplesPerPool;
    private variable VolumePerSample;
    private variable NumberOfSamples;
    private variable WellID_Pool;
    private file file1;
    private variable CheckWell;
    private variable RecordsInArray;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable arr_Pools[];
    private variable Found;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private dialog customDialog_1;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Pool_LVFT_SingleDispenseFromPlateToPlate <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    NumberOfSamples = SeqGetTotal(i_seq_PoolingPlate);
    arr_Pools.SetSize(0);
    file1.AddField("PoolWell", WellID_Pool, hslString, 255);
    if( 0 == file1.Open(i_str_NormalizationFile + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_NormalizationFile, "HxMetEdCompCmd");
    }
    if( 0 == file1.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    arr_Pools.AddAsLast(WellID_Pool);
    {
      loopCounter2 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        RecordsInArray=arr_Pools.GetSize();
        {
          for(loopCounter3 = 0; loopCounter3 < RecordsInArray;)
          {
            loopCounter3 = loopCounter3 + 1;
            CheckWell=arr_Pools.GetAt(loopCounter3-1);
            if (CheckWell == WellID_Pool)
            {
              Found = 1;
              break;
            }
          }
        }
        if (Found == 0)
        {
          arr_Pools.AddAsLast(WellID_Pool);
        }
        Found = 0;
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    WellsInPoolingPlate=arr_Pools.GetSize();
    SamplesPerPool = NumberOfSamples / (WellsInPoolingPlate * 1.0);
    if (SamplesPerPool <= 24)
    {
      VolumePerSample = 10;
    }
    else
    {
      VolumePerSample = 5;
    }
    Trace ("Number of Samples = ", NumberOfSamples);
    Trace ("Number of Pools = ", WellsInPoolingPlate);
    Trace ("Samples per pool = ", SamplesPerPool);
    Trace ("Volume to transfer per sample = ", VolumePerSample);
    if (intCurrentTipType == 23)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      {
        loopCounter1 = 0;
        while (
           (i_seq_NormPlate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, i_seq_NormPlate, 1, seq_Tips50, 1, i_seq_PoolingPlate, 1);
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	strStepReturnValueAspiration = arrRetValues[2];
          }
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	strStepReturnValueDispense = arrRetValues[2];
          }
          _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          DATA_TipCounterWrite(ML_STAR);
          if (
             (i_seq_NormPlate.GetCurrentPosition() > 0 && i_seq_NormPlate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        i_seq_NormPlate.SetMax(i_seq_NormPlate.GetTotal());
        seq_Tips50.SetMax(seq_Tips50.GetTotal());
        i_seq_PoolingPlate.SetMax(i_seq_PoolingPlate.GetTotal());
        i_seq_NormPlate.SetCurrentPosition(1);
        i_seq_PoolingPlate.SetCurrentPosition(1);
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    else
    {
      MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, i_seq_NormPlate);
    {
      variable _FilterIdsArray_2[];
      variable _ColumnIdsArray_2[];
      variable _ColumnNamesArray_2[];
      variable _ExperimentsArray_2[];
      _FilterIdsArray_2.SetSize(0);
      _ColumnNamesArray_2.SetSize(14);
      _ColumnIdsArray_2.SetSize(14);
      _ColumnNamesArray_2.SetAt(0, "RecordId");
      _ColumnIdsArray_2.SetAt(0, 0);
      _ColumnNamesArray_2.SetAt(1, "TRackBC");
      _ColumnIdsArray_2.SetAt(1, 1);
      _ColumnNamesArray_2.SetAt(2, "TLabwareId");
      _ColumnIdsArray_2.SetAt(2, 2);
      _ColumnNamesArray_2.SetAt(3, "TPositionId");
      _ColumnIdsArray_2.SetAt(3, 3);
      _ColumnNamesArray_2.SetAt(4, "TPositionBC");
      _ColumnIdsArray_2.SetAt(4, 4);
      _ColumnNamesArray_2.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_2.SetAt(5, 5);
      _ColumnNamesArray_2.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_2.SetAt(6, 6);
      _ColumnNamesArray_2.SetAt(7, "TVolume");
      _ColumnIdsArray_2.SetAt(7, 7);
      _ColumnNamesArray_2.SetAt(8, "SRackBC");
      _ColumnIdsArray_2.SetAt(8, 8);
      _ColumnNamesArray_2.SetAt(9, "SLabwareId");
      _ColumnIdsArray_2.SetAt(9, 9);
      _ColumnNamesArray_2.SetAt(10, "SPositionId");
      _ColumnIdsArray_2.SetAt(10, 10);
      _ColumnNamesArray_2.SetAt(11, "SPositionBC");
      _ColumnIdsArray_2.SetAt(11, 11);
      _ColumnNamesArray_2.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_2.SetAt(12, 12);
      _ColumnNamesArray_2.SetAt(13, "UserName");
      _ColumnIdsArray_2.SetAt(13, 13);
      _ExperimentsArray_2.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seq_PoolingPlate, 3, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, "Pool_Into_A1_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Pool_LVFT_SingleDispenseFromPlateToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_OIL_LVFTSingleDispenseFromTroughToPlate( device & ML_STAR, sequence & seq_HSP, sequence & seq_Oil ) void {
    private variable loopCounter1;
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable fltVolume;
    private variable i_strLiquidClassNameTransfer;
    private variable strLabwareIDAspiration;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private sequence seq_AspirationPosition;
    private dialog customDialog_3;
    private dialog customDialog_4;
    private dialog customDialog_5;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_OIL_LVFTSingleDispenseFromTroughToPlate <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    fltVolume = 10;
    _DATA_PlausibilityCheckVolume(fltVolume, intCurrentTipType);
    strLabwareIDAspiration = SeqGetLabwareId(seq_AspirationPosition);
    _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Part")
    {
      if (intCurrentTipType == 23)
      {
        if (strTypeOfLabware == "trough")
        {
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          {
            loopCounter1 = 0;
            while (
               (seq_HSP.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, seq_HSP, 1, seq_Oil, 1, seq_Tips50, 1);
              loopCounter1 = loopCounter1 + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (seq_HSP.GetCurrentPosition() > 0 && seq_HSP.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            seq_HSP.SetMax(seq_HSP.GetTotal());
            seq_Oil.SetMax(seq_Oil.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            seq_HSP.SetCurrentPosition(1);
            seq_Oil.SetCurrentPosition(1);
          }
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
        else
        {
          MECC::TraceComment(Translate("WRONG LABWARE DETECTED"));
          customDialog_3.InitCustomDialog("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");
          customDialog_3.ShowCustomDialog();
          retValueDialog = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      else
      {
        MECC::TraceComment(Translate("\"WRONG TIPTYPE DETECED\""));
        customDialog_5.InitCustomDialog("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");
        customDialog_5.ShowCustomDialog();
        retValueDialog = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("Wrong Dispense mode detected"));
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      retValueDialog = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_Oil);
    {
      variable _FilterIdsArray_6[];
      variable _ColumnIdsArray_6[];
      variable _ColumnNamesArray_6[];
      variable _ExperimentsArray_6[];
      _FilterIdsArray_6.SetSize(0);
      _ColumnNamesArray_6.SetSize(14);
      _ColumnIdsArray_6.SetSize(14);
      _ColumnNamesArray_6.SetAt(0, "RecordId");
      _ColumnIdsArray_6.SetAt(0, 0);
      _ColumnNamesArray_6.SetAt(1, "TRackBC");
      _ColumnIdsArray_6.SetAt(1, 1);
      _ColumnNamesArray_6.SetAt(2, "TLabwareId");
      _ColumnIdsArray_6.SetAt(2, 2);
      _ColumnNamesArray_6.SetAt(3, "TPositionId");
      _ColumnIdsArray_6.SetAt(3, 3);
      _ColumnNamesArray_6.SetAt(4, "TPositionBC");
      _ColumnIdsArray_6.SetAt(4, 4);
      _ColumnNamesArray_6.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_6.SetAt(5, 5);
      _ColumnNamesArray_6.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_6.SetAt(6, 6);
      _ColumnNamesArray_6.SetAt(7, "TVolume");
      _ColumnIdsArray_6.SetAt(7, 7);
      _ColumnNamesArray_6.SetAt(8, "SRackBC");
      _ColumnIdsArray_6.SetAt(8, 8);
      _ColumnNamesArray_6.SetAt(9, "SLabwareId");
      _ColumnIdsArray_6.SetAt(9, 9);
      _ColumnNamesArray_6.SetAt(10, "SPositionId");
      _ColumnIdsArray_6.SetAt(10, 10);
      _ColumnNamesArray_6.SetAt(11, "SPositionBC");
      _ColumnIdsArray_6.SetAt(11, 11);
      _ColumnNamesArray_6.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_6.SetAt(12, 12);
      _ColumnNamesArray_6.SetAt(13, "UserName");
      _ColumnIdsArray_6.SetAt(13, 13);
      _ExperimentsArray_6.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_HSP, 3, _FilterIdsArray_6, 0, _ColumnIdsArray_6, _ColumnNamesArray_6, _ExperimentsArray_6, "PlateLiquidToPlate.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_OIL_LVFTSingleDispenseFromTroughToPlate<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_EtOH_HVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_strLiquidClassNameTransfer, variable & var_TrackingEthanolVolume, variable i_intEthanolVolume ) void {
    private variable VolumeToAspirate_8channels_mL;
    private variable AspVolume_Ethanol;
    private variable ret_MeasuredVol_Ch1;
    private variable NumberOfColumns;
    private variable VolAsp8ch_mL_inclDeadVol;
    private variable VolumeToAspirate;
    private variable MixCycles;
    private variable ActualIncubationDuration;
    private variable Vol_Ch1;
    private variable VolumeToAspirate_8channels_uL;
    private variable loopCounter3;
    private variable loopCounter4;
    private timer Incubate30sec;
    private variable AspVolume_Ethanol1;
    private variable AspVolume_Ethanol2;
    private variable AspVolume_Ethanol3;
    private variable NumberOfDispenses1;
    private variable NumberOfDispenses2;
    private variable NumberOfDispenses3;
    private variable NumberOfDispenses;
    private variable NumberOfAspirations;
    private variable ret_PositionsEthanol;
    private variable Pointer_EthanolSequence;
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable intNumberOfSamples;
    private variable strLabwareIDAspiration;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable fltVolume;
    private dialog customDialog_7;
    private dialog customDialog_8;
    private dialog customDialog_9;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: PIP_EtOH_HVFTMultidispenseFromTroughToPlate <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    fltVolume = i_intEthanolVolume;
    _DATA_PlausibilityCheckVolume(fltVolume, intCurrentTipType);
    strLabwareIDAspiration = SeqGetLabwareId(seq_AspirationPosition);
    _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
    intNumberOfSamples = seq_DispensePosition.GetCount();
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    seq_DispensePosition.SetCurrentPosition(1);
    NumberOfCompleteColumns = intNumberOfSamples / 8;
    RemainingWells = intNumberOfSamples % 8;
    Trace ("Number of Complete Columns in Destination Plate:  ", NumberOfCompleteColumns);
    Trace ("Number of Wells in Last, Incomplete Column:  ", RemainingWells);
    if (RemainingWells > 0)
    {
      NumberOfColumns = NumberOfCompleteColumns + 1;
    }
    else
    {
      NumberOfColumns = NumberOfCompleteColumns;
    }
    AspVolume_Ethanol = fltVolume * NumberOfColumns;
    Trace ("Required Total Volume for Ethanol, Per Row, Max = ", AspVolume_Ethanol);
    if (AspVolume_Ethanol <= 1000)
    {
      NumberOfAspirations = 1;
      NumberOfDispenses1 = NumberOfColumns;
      AspVolume_Ethanol1 = AspVolume_Ethanol;
    }
    else
    {
      NumberOfAspirations = AspVolume_Ethanol / (1000 * 1.0);
      NumberOfAspirations = MthCeiling(NumberOfAspirations);
      NumberOfDispenses1 = 5;
      NumberOfDispenses2 = NumberOfColumns - NumberOfDispenses1;
      if (NumberOfDispenses2 > 5)
      {
        NumberOfDispenses3 = NumberOfDispenses2 - 5;
        NumberOfDispenses2 = 5;
      }
      AspVolume_Ethanol1 = fltVolume * NumberOfDispenses1;
      AspVolume_Ethanol2 = fltVolume * NumberOfDispenses2;
      AspVolume_Ethanol3 = fltVolume * NumberOfDispenses3;
    }
    Trace ("Number of Aspirations:  ", NumberOfAspirations);
    Trace ("Number of Columns for the first set of dispenses:  ", NumberOfDispenses1);
    Trace ("Number of Columns for the second set of dispenses:  ", NumberOfDispenses2);
    Trace ("Number of Columns for the third set of dispenses:  ", NumberOfDispenses3);
    Trace ("Aspiration volume for the first set of dispenses:  ", AspVolume_Ethanol1);
    Trace ("Aspiration volume for the second set of dispenses:  ", AspVolume_Ethanol2);
    Trace ("Aspiration volume for the third set of dispenses:  ", AspVolume_Ethanol3);
    if (strCurrentDispenseMode == "Part")
    {
      if (intCurrentTipType == 5)
      {
        if (strTypeOfLabware == "trough")
        {
          {
            loopCounter4 = 0;
            while (
               (seq_DispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1);
              loopCounter4 = loopCounter4 + 1;
              TrcTrace(Translate("_________________________________________________"), loopCounter4);
              if (loopCounter4 == 1)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                VolumeToAspirate = AspVolume_Ethanol1;
                NumberOfDispenses = NumberOfDispenses1;
                MixCycles = 1;
                var_TrackingEthanolVolume = 0;
              }
              if (loopCounter4 == 2)
              {
                VolumeToAspirate = AspVolume_Ethanol2;
                NumberOfDispenses = NumberOfDispenses2;
                MixCycles = 0;
              }
              if (loopCounter4 == 3)
              {
                VolumeToAspirate = AspVolume_Ethanol3;
                NumberOfDispenses = NumberOfDispenses3;
                MixCycles = 0;
              }
              MECC::TraceComment(Translate("Need to determine if there is enough liquid in the tub for the next aspiration step. "));
              Trace (">>> Expected ethanol volume in tub:  ", var_TrackingEthanolVolume);
              if (var_TrackingEthanolVolume <= 0)
              {
                MECC::TraceComment(Translate("At the start of a run, or if going to a new or refilled tub, the volume is unknown, so we have to measure it:"));
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
                Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
                var_TrackingEthanolVolume = Vol_Ch1;
                if (_blnSimulationModeON == 1)
                {
                  var_TrackingEthanolVolume = 12000;
                }
                Trace (">>> After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
              }
              VolumeToAspirate_8channels_uL = VolumeToAspirate * 8;
              VolumeToAspirate_8channels_mL = VolumeToAspirate_8channels_uL / (1000 * 1.0);
              VolAsp8ch_mL_inclDeadVol = VolumeToAspirate_8channels_mL + 2;
              Trace (">>> Next step needs this volume in tube (mL), including dead volume:  ", VolAsp8ch_mL_inclDeadVol);
              if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
              {
                MECC::TraceComment(Translate("***** Insufficient volume of ethanol in tub.  Go to next tub, if available. *****"));
                var_TrackingEthanolVolume = 0;
                ret_PositionsEthanol = SeqGetTotal(seq_AspirationPosition);
                if (ret_PositionsEthanol >= 16)
                {
                  Pointer_EthanolSequence = seq_AspirationPosition.GetCurrentPosition();
                  if (Pointer_EthanolSequence <= 9)
                  {
                    SeqIncrement(seq_AspirationPosition, 8);
                    MECC::TraceComment(Translate("***** Sequence incremented.  Going to next tub. Need to measure volume in tub. *****"));
                    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
                    Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
                    var_TrackingEthanolVolume = Vol_Ch1;
                    if (_blnSimulationModeON == 1)
                    {
                      var_TrackingEthanolVolume = 120000;
                    }
                    Trace ("After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
                    if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
                    {
                      MECC::TraceComment(Translate("***** INADEQUATE VOLUME IN NEW TUB.  ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION.  *****"));
                    }
                  }
                  else
                  {
                    MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
                  }
                }
                else
                {
                  MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              TrcTraceSequence(seq_AspirationPosition);
              var_TrackingEthanolVolume = var_TrackingEthanolVolume - VolumeToAspirate_8channels_mL;
              Trace ("New, calculated ethanol volume in tub:  ", var_TrackingEthanolVolume);
              {
                for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                  _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
                }
              }
              TrcTraceSequence(seq_DispensePosition);
              if (loopCounter4 == 1)
              {
                if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
                {
                  if( 0 == Incubate30sec.SetTimer(23) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                }
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
            seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
            seq_DispensePosition.SetCurrentPosition(1);
          }
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          STCC::ResetFilterSequences();
          STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
          {
            variable _FilterIdsArray_10[];
            variable _ColumnIdsArray_10[];
            variable _ColumnNamesArray_10[];
            variable _ExperimentsArray_10[];
            _FilterIdsArray_10.SetSize(0);
            _ColumnNamesArray_10.SetSize(14);
            _ColumnIdsArray_10.SetSize(14);
            _ColumnNamesArray_10.SetAt(0, "RecordId");
            _ColumnIdsArray_10.SetAt(0, 0);
            _ColumnNamesArray_10.SetAt(1, "TRackBC");
            _ColumnIdsArray_10.SetAt(1, 1);
            _ColumnNamesArray_10.SetAt(2, "TLabwareId");
            _ColumnIdsArray_10.SetAt(2, 2);
            _ColumnNamesArray_10.SetAt(3, "TPositionId");
            _ColumnIdsArray_10.SetAt(3, 3);
            _ColumnNamesArray_10.SetAt(4, "TPositionBC");
            _ColumnIdsArray_10.SetAt(4, 4);
            _ColumnNamesArray_10.SetAt(5, "TStatusSummary");
            _ColumnIdsArray_10.SetAt(5, 5);
            _ColumnNamesArray_10.SetAt(6, "TSumStateDescription");
            _ColumnIdsArray_10.SetAt(6, 6);
            _ColumnNamesArray_10.SetAt(7, "TVolume");
            _ColumnIdsArray_10.SetAt(7, 7);
            _ColumnNamesArray_10.SetAt(8, "SRackBC");
            _ColumnIdsArray_10.SetAt(8, 8);
            _ColumnNamesArray_10.SetAt(9, "SLabwareId");
            _ColumnIdsArray_10.SetAt(9, 9);
            _ColumnNamesArray_10.SetAt(10, "SPositionId");
            _ColumnIdsArray_10.SetAt(10, 10);
            _ColumnNamesArray_10.SetAt(11, "SPositionBC");
            _ColumnIdsArray_10.SetAt(11, 11);
            _ColumnNamesArray_10.SetAt(12, "ActionDateTime");
            _ColumnIdsArray_10.SetAt(12, 12);
            _ColumnNamesArray_10.SetAt(13, "UserName");
            _ColumnIdsArray_10.SetAt(13, 13);
            _ExperimentsArray_10.SetSize(0);
            STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_10, 0, _ColumnIdsArray_10, _ColumnNamesArray_10, _ExperimentsArray_10, "Ethanol_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
          }
          seq_DispensePosition.SetCurrentPosition(1);
          if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
          {
            if( 0 == Incubate30sec.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            ActualIncubationDuration = Incubate30sec.GetElapsedTime();
          }
          Trace ("***** Actual incubation time (expected minimum 30 seconds for first column of wells):  ", ActualIncubationDuration);
        }
        else
        {
          MECC::TraceComment(Translate("WRONG LABWARE DETECTED"));
          customDialog_7.InitCustomDialog("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");
          customDialog_7.ShowCustomDialog();
          retValueDialog = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      else
      {
        MECC::TraceComment(Translate("\"WRONG TIPTYPE DETECED\""));
        customDialog_9.InitCustomDialog("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");
        customDialog_9.ShowCustomDialog();
        retValueDialog = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("Wrong Dispense mode detected"));
      customDialog_8.InitCustomDialog("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");
      customDialog_8.ShowCustomDialog();
      retValueDialog = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TrcTraceSequence(seq_DispensePosition);
    SeqResetSequenceIndexes(seq_DispensePosition);
    seq_DispensePosition.SetCurrentPosition(1);
    seq_DispensePosition.SetCount(intNumberOfSamples);
    TrcTraceSequence(seq_DispensePosition);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_EtOH_HVFTMultidispenseFromTroughToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_Normalize_LVFTForSampleTransferSVFTForBufferTransfer( device & ML_STAR, variable i_strNormalizationFile, sequence & io_seqBuffer, sequence & io_seqSourcePlate, sequence & io_seqDestinationPlate, variable i_strLiquidClassNameTransferBUFFER, variable i_strLiquidClassNameTransferSAMPLE, sequence & io_seqPlateSeqForJustBuffer, sequence & io_seqPoolingPlate ) void {
    private variable LabwareID_PoolingPlate;
    private variable LinesInTheFile;
    private variable BufferVolume;
    private variable WellID_Pool;
    private variable WellID_Source;
    private variable LabwareID_SourcePlate;
    private variable TheLabwareID;
    private variable ExtraVolume;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable DispVolume;
    private variable LabwareID_DestinationPlate;
    private variable ArrayIndexCounter;
    private file file1;
    private variable arr_NormalizationVolumes[];
    private variable arr_NormVolDispense[];
    private variable arr_NormVolDispenseExtra[];
    private variable SampleConc;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipTypePipSAMPLE;
    private variable intCurrentTipTypePipBUFFER;
    private dialog customDialog_11;
    private dialog customDialog_12;
    private dialog customDialog_13;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Normalize_LVFTForSampleTransferSVFTForBufferTransfer <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransferSAMPLE, intCurrentTipTypePipSAMPLE, intCurrentDispenseMode);
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransferBUFFER, intCurrentTipTypePipBUFFER, intCurrentDispenseMode);
    LabwareID_SourcePlate = SeqGetLabwareId(io_seqSourcePlate);
    LabwareID_DestinationPlate = SeqGetLabwareId(io_seqDestinationPlate);
    LabwareID_PoolingPlate = SeqGetLabwareId(io_seqPoolingPlate);
    SeqRemoveAll(io_seqSourcePlate);
    SeqRemoveAll(io_seqDestinationPlate);
    SeqRemoveAll(io_seqPoolingPlate);
    file1.AddField("SourceWell", WellID_Source, hslString, 255);
    file1.AddField("nM", SampleConc, hslFloat);
    file1.AddField("PoolWell", WellID_Pool, hslString, 255);
    if( 0 == file1.Open(i_strNormalizationFile + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strNormalizationFile, "HxMetEdCompCmd");
    }
    arr_NormalizationVolumes.SetSize(0);
    arr_NormVolDispense.SetSize(0);
    {
      LinesInTheFile = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        LinesInTheFile = LinesInTheFile + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        BufferVolume = SampleConc - 10;
        BufferVolume = MthRound(BufferVolume, 1);
        Trace ("Source well ", WellID_Source, ", Concentration (nM) = ", SampleConc, ", so Buffer Volume is ", BufferVolume, "ul.");
        if (BufferVolume > 300)
        {
          BufferVolume = 300;
        }
        DispVolume = BufferVolume + 0;
        arr_NormalizationVolumes.AddAsLast(BufferVolume);
        arr_NormVolDispense.AddAsLast(DispVolume);
        SeqAdd(io_seqSourcePlate, LabwareID_SourcePlate, WellID_Source);
        SeqAdd(io_seqDestinationPlate, LabwareID_DestinationPlate, WellID_Source);
        SeqAdd(io_seqPoolingPlate, LabwareID_PoolingPlate, WellID_Pool);
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    io_seqSourcePlate.SetCurrentPosition(1);
    io_seqDestinationPlate.SetCurrentPosition(1);
    io_seqPoolingPlate.SetCurrentPosition(1);
    MECC::TraceComment(Translate("************* Pipette the sample to the plate...."));
    if (intCurrentTipTypePipSAMPLE == 23)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      {
        loopCounter2 = 0;
        while (
           (io_seqSourcePlate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, io_seqBuffer, 1, io_seqSourcePlate, 1, seq_Tips50, 1, io_seqDestinationPlate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	strStepReturnValueAspiration = arrRetValues[2];
          }
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	strStepReturnValueDispense = arrRetValues[2];
          }
          _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          DATA_TipCounterWrite(ML_STAR);
          if (
             (io_seqSourcePlate.GetCurrentPosition() > 0 && io_seqSourcePlate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        io_seqBuffer.SetMax(io_seqBuffer.GetTotal());
        io_seqSourcePlate.SetMax(io_seqSourcePlate.GetTotal());
        seq_Tips50.SetMax(seq_Tips50.GetTotal());
        io_seqDestinationPlate.SetMax(io_seqDestinationPlate.GetTotal());
        io_seqBuffer.SetCurrentPosition(1);
        io_seqSourcePlate.SetCurrentPosition(1);
        io_seqDestinationPlate.SetCurrentPosition(1);
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    else
    {
      MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
      customDialog_13.InitCustomDialog("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");
      customDialog_13.ShowCustomDialog();
      retValueDialog = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    MECC::TraceComment(Translate("************* Pipette the buffer to the plate...."));
    ArrayIndexCounter = 1;
    if (intCurrentTipTypePipBUFFER == 1)
    {
      {
        loopCounter2 = 0;
        while (
           (io_seqDestinationPlate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, io_seqBuffer, 1, seq_Tips300, 1, io_seqDestinationPlate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	strStepReturnValueAspiration = arrRetValues[2];
          }
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	strStepReturnValueDispense = arrRetValues[2];
          }
          _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          ArrayIndexCounter = ArrayIndexCounter + 8;
          DATA_TipCounterWrite(ML_STAR);
          if (
             (io_seqDestinationPlate.GetCurrentPosition() > 0 && io_seqDestinationPlate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        io_seqBuffer.SetMax(io_seqBuffer.GetTotal());
        seq_Tips300.SetMax(seq_Tips300.GetTotal());
        io_seqDestinationPlate.SetMax(io_seqDestinationPlate.GetTotal());
        io_seqBuffer.SetCurrentPosition(1);
        io_seqDestinationPlate.SetCurrentPosition(1);
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
      customDialog_12.InitCustomDialog("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");
      customDialog_12.ShowCustomDialog();
      retValueDialog = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    MECC::TraceComment(Translate("************* Pipette extra buffer to the plate (and mix) when the required buffer volume is greater than 290ul...."));
    TheLabwareID = SeqGetLabwareId(io_seqDestinationPlate);
    SeqRemoveAll(io_seqPlateSeqForJustBuffer);
    arr_NormVolDispenseExtra.SetSize(0);
    file1.AddField("SourceWell", WellID_Source, hslString, 255);
    file1.AddField("nM", SampleConc, hslFloat);
    if( 0 == file1.Open(i_strNormalizationFile + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strNormalizationFile, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        BufferVolume = SampleConc - 10;
        BufferVolume = MthRound(BufferVolume, 1);
        if (BufferVolume > 300)
        {
          ExtraVolume = BufferVolume - 300;
          if (ExtraVolume > 300)
          {
            Trace ("WARNING!!! For well ", WellID_Source, ", in the normalization plate, ", ExtraVolume, "ul extra buffer is required, but only 300 will be pipetted.");
            ExtraVolume = 300;
          }
          else
          {
            Trace ("For well ", WellID_Source, ", in the normalization plate, ", ExtraVolume, "ul extra buffer is required.");
          }
          arr_NormVolDispenseExtra.AddAsLast(ExtraVolume);
          SeqAdd(io_seqPlateSeqForJustBuffer, TheLabwareID, WellID_Source);
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    io_seqPlateSeqForJustBuffer.SetCurrentPosition(1);
    ArrayIndexCounter = 1;
    if (intCurrentTipTypePipBUFFER == 1)
    {
      {
        loopCounter2 = 0;
        while (
           (io_seqPlateSeqForJustBuffer.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, io_seqBuffer, 1, seq_Tips300, 1, io_seqPlateSeqForJustBuffer, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	strStepReturnValueAspiration = arrRetValues[2];
          }
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	strStepReturnValueDispense = arrRetValues[2];
          }
          _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          ArrayIndexCounter = ArrayIndexCounter + 8;
          DATA_TipCounterWrite(ML_STAR);
          if (
             (io_seqPlateSeqForJustBuffer.GetCurrentPosition() > 0 && io_seqPlateSeqForJustBuffer.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        io_seqBuffer.SetMax(io_seqBuffer.GetTotal());
        seq_Tips300.SetMax(seq_Tips300.GetTotal());
        io_seqPlateSeqForJustBuffer.SetMax(io_seqPlateSeqForJustBuffer.GetTotal());
        io_seqBuffer.SetCurrentPosition(1);
        io_seqPlateSeqForJustBuffer.SetCurrentPosition(1);
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
      customDialog_11.InitCustomDialog("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");
      customDialog_11.ShowCustomDialog();
      retValueDialog = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, io_seqBuffer);
    STCC::AddFilterSequence(ML_STAR, io_seqSourcePlate);
    {
      variable _FilterIdsArray_14[];
      variable _ColumnIdsArray_14[];
      variable _ColumnNamesArray_14[];
      variable _ExperimentsArray_14[];
      _FilterIdsArray_14.SetSize(0);
      _ColumnNamesArray_14.SetSize(14);
      _ColumnIdsArray_14.SetSize(14);
      _ColumnNamesArray_14.SetAt(0, "RecordId");
      _ColumnIdsArray_14.SetAt(0, 0);
      _ColumnNamesArray_14.SetAt(1, "TRackBC");
      _ColumnIdsArray_14.SetAt(1, 1);
      _ColumnNamesArray_14.SetAt(2, "TLabwareId");
      _ColumnIdsArray_14.SetAt(2, 2);
      _ColumnNamesArray_14.SetAt(3, "TPositionId");
      _ColumnIdsArray_14.SetAt(3, 3);
      _ColumnNamesArray_14.SetAt(4, "TPositionBC");
      _ColumnIdsArray_14.SetAt(4, 4);
      _ColumnNamesArray_14.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_14.SetAt(5, 5);
      _ColumnNamesArray_14.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_14.SetAt(6, 6);
      _ColumnNamesArray_14.SetAt(7, "TVolume");
      _ColumnIdsArray_14.SetAt(7, 7);
      _ColumnNamesArray_14.SetAt(8, "SRackBC");
      _ColumnIdsArray_14.SetAt(8, 8);
      _ColumnNamesArray_14.SetAt(9, "SLabwareId");
      _ColumnIdsArray_14.SetAt(9, 9);
      _ColumnNamesArray_14.SetAt(10, "SPositionId");
      _ColumnIdsArray_14.SetAt(10, 10);
      _ColumnNamesArray_14.SetAt(11, "SPositionBC");
      _ColumnIdsArray_14.SetAt(11, 11);
      _ColumnNamesArray_14.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_14.SetAt(12, 12);
      _ColumnNamesArray_14.SetAt(13, "UserName");
      _ColumnIdsArray_14.SetAt(13, 13);
      _ExperimentsArray_14.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, io_seqDestinationPlate, 3, _FilterIdsArray_14, 0, _ColumnIdsArray_14, _ColumnNamesArray_14, _ExperimentsArray_14, "Normalization_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Normalize_LVFTForSampleTransferSVFTForBufferTransfer <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _PIP_HVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void {
    private variable NumberOfRemainingWells;
    private variable NumberOfColumns;
    private variable NumberOfDispenses1;
    private variable NumberOfDispenses2;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable NumberOfAliquotsPerAsp1;
    private variable NumberOfAliquotsPerAsp2;
    private variable NumberOfDispenses;
    private variable NumberOfAspirations;
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable intNumberOfSamples;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable strLabwareIDAspiration;
    private variable AspVolume_1;
    private variable AspVolume_2;
    private variable AspVolume;
    private variable MixVolume;
    private variable NumberOfDispenses3;
    private variable AspVolume_3;
    private variable NumberOfAliquotsPerAsp3;
    private variable intMaximalDispensesPerAspiration;
    private variable fltMaximalDispensesPerAspiration;
    private variable intMaximalDispensesPer2Aspirations;
    private variable NumberOfAliquotsPerAsp4;
    private variable intMaximalDispensesPer3Aspirations;
    private variable NumberOfDispenses4;
    private variable AspVolume_4;
    private variable intMixCycles;
    private variable intLabwareTypeIsABeadsTrough;
    private dialog customDialog_15;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    MECC::TraceComment(Translate("ииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииии\n>>>>>>>>>> Submethod:  _PIP_HVFTMultidispenseFromTroughToPlate<<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    strLabwareIDAspiration = SeqGetLabwareId(seq_AspirationPosition);
    intLabwareTypeIsABeadsTrough = StrFind(strLabwareIDAspiration, Translate("Beads"));
    if (intLabwareTypeIsABeadsTrough > 0)
    {
      MECC::TraceComment(Translate("Reagent trough  contains beads --> mix cycles = 6 during aspiration"));
      intMixCycles = 6;
    }
    else
    {
      intMixCycles = 0;
    }
    Trace ("mix cycles during aspiration:  ", intMixCycles);
    _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
    intNumberOfSamples = seq_DispensePosition.GetCount();
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    Trace ("Current dispense mode:  ", strCurrentDispenseMode);
    if (strCurrentDispenseMode == "Part")
    {
      if (intCurrentTipType == 5)
      {
        Trace ("Volume per well:  ", i_fltVolume);
        MECC::TraceComment(Translate("Calculations for dispensing ..........."));
        NumberOfCompleteColumns = intNumberOfSamples / 8;
        NumberOfRemainingWells = intNumberOfSamples % 8;
        Trace ("Number of Complete Columns in Destination Plate:  ", NumberOfCompleteColumns);
        Trace ("Number of Wells in Last, Incomplete Column:  ", NumberOfRemainingWells);
        if (NumberOfRemainingWells > 0)
        {
          NumberOfColumns = NumberOfCompleteColumns + 1;
        }
        else
        {
          NumberOfColumns = NumberOfCompleteColumns;
        }
        Trace ("Total Number of Columns:  ", NumberOfColumns);
        fltMaximalDispensesPerAspiration = 1000 / (i_fltVolume * 1.0);
        intMaximalDispensesPerAspiration = MthFloor(fltMaximalDispensesPerAspiration);
        intMaximalDispensesPerAspiration = intMaximalDispensesPerAspiration - 2;
        Trace ("Maximal Number of Dispenses per Aspiration = ", intMaximalDispensesPerAspiration);
        NumberOfAspirations = NumberOfColumns / (intMaximalDispensesPerAspiration * 1.0);
        NumberOfAspirations = MthCeiling(NumberOfAspirations);
        if (NumberOfAspirations == 1)
        {
          if (NumberOfColumns < intMaximalDispensesPerAspiration)
          {
            MECC::TraceComment(Translate("Number of columns are less then Maximal Dispenses per Aspiration"));
            NumberOfDispenses1 = NumberOfColumns;
          }
          else
          {
            MECC::TraceComment(Translate("Number of columns are equal to Maximal Dispenses per Aspiration"));
            NumberOfDispenses1 = intMaximalDispensesPerAspiration;
          }
          NumberOfDispenses2 = 0;
          NumberOfDispenses3 = 0;
          NumberOfDispenses4 = 0;
        }
        if (NumberOfAspirations == 2)
        {
          NumberOfDispenses1 = intMaximalDispensesPerAspiration;
          NumberOfDispenses2 = NumberOfColumns - intMaximalDispensesPerAspiration;
          NumberOfDispenses3 = 0;
        }
        if (NumberOfAspirations == 3)
        {
          NumberOfDispenses1 = intMaximalDispensesPerAspiration;
          NumberOfDispenses2 = intMaximalDispensesPerAspiration;
          intMaximalDispensesPer2Aspirations = intMaximalDispensesPerAspiration * 2;
          NumberOfDispenses3 = NumberOfColumns - intMaximalDispensesPer2Aspirations;
        }
        if (NumberOfAspirations == 4)
        {
          NumberOfDispenses1 = intMaximalDispensesPerAspiration;
          NumberOfDispenses2 = intMaximalDispensesPerAspiration;
          NumberOfDispenses3 = intMaximalDispensesPerAspiration;
          intMaximalDispensesPer3Aspirations = intMaximalDispensesPerAspiration * 3;
          NumberOfDispenses4 = NumberOfColumns - intMaximalDispensesPer3Aspirations;
        }
        if (NumberOfDispenses1 > 0)
        {
          NumberOfAliquotsPerAsp1 = NumberOfDispenses1 + 2;
          AspVolume_1 = i_fltVolume * NumberOfAliquotsPerAsp1;
        }
        if (NumberOfDispenses2 > 0)
        {
          NumberOfAliquotsPerAsp2 = NumberOfDispenses2 + 2;
          AspVolume_2 = i_fltVolume * NumberOfAliquotsPerAsp2;
        }
        else
        {
          AspVolume_2 = 0;
          AspVolume_3 = 0;
          AspVolume_4 = 0;
        }
        if (NumberOfDispenses3 > 0)
        {
          NumberOfAliquotsPerAsp3 = NumberOfDispenses3 + 2;
          AspVolume_3 = i_fltVolume * NumberOfAliquotsPerAsp3;
        }
        else
        {
          AspVolume_3 = 0;
          AspVolume_4 = 0;
        }
        if (NumberOfDispenses4 > 0)
        {
          NumberOfAliquotsPerAsp4 = NumberOfDispenses4 + 2;
          AspVolume_4 = i_fltVolume * NumberOfAliquotsPerAsp4;
        }
        else
        {
          AspVolume_4 = 0;
        }
        Trace ("Number of Aspirations:  ", NumberOfAspirations);
        Trace ("Number of Columns for the first set of dispenses:  ", NumberOfDispenses1);
        Trace ("Number of Columns for the second set of dispenses:  ", NumberOfDispenses2);
        Trace ("Number of Columns for the third set of dispenses:  ", NumberOfDispenses3);
        Trace ("Number of Columns for the fourth set of dispenses:  ", NumberOfDispenses4);
        Trace ("Aspiration volume for the first set of dispenses:  ", AspVolume_1);
        Trace ("Aspiration volume for the second set of dispenses:  ", AspVolume_2);
        Trace ("Aspiration volume for the third set of dispenses:  ", AspVolume_3);
        Trace ("Aspiration volume for the fourth set of dispenses:  ", AspVolume_4);
        if (AspVolume_1 > 0)
        {
          _DATA_PlausibilityCheckVolume(AspVolume_1, 5);
        }
        if (AspVolume_2 > 0)
        {
          _DATA_PlausibilityCheckVolume(AspVolume_2, 5);
        }
        if (AspVolume_3 > 0)
        {
          _DATA_PlausibilityCheckVolume(AspVolume_3, 5);
        }
        if (AspVolume_4 > 0)
        {
          _DATA_PlausibilityCheckVolume(AspVolume_4, 5);
        }
        MECC::TraceComment(Translate("********** Fill plate  ..........."));
        TrcTraceSequence(seq_DispensePosition);
        {
          loopCounter2 = 0;
          while (
             (seq_DispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips1000, 1);
            loopCounter2 = loopCounter2 + 1;
            if (loopCounter2 == 1)
            {
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              AspVolume = AspVolume_1;
              NumberOfDispenses = NumberOfDispenses1;
              if (AspVolume >= 1000)
              {
                MixVolume = 1000;
              }
              else
              {
                if (AspVolume < 250)
                {
                  MixVolume = 250;
                }
                else
                {
                  MixVolume = AspVolume_1;
                }
              }
            }
            if (loopCounter2 == 2)
            {
              AspVolume = AspVolume_2;
              NumberOfDispenses = NumberOfDispenses2;
              if (AspVolume >= 1000)
              {
                MixVolume = 1000;
              }
              else
              {
                if (AspVolume < 250)
                {
                  MixVolume = 250;
                }
                else
                {
                  MixVolume = AspVolume_2;
                }
              }
            }
            if (loopCounter2 == 3)
            {
              AspVolume = AspVolume_3;
              NumberOfDispenses = NumberOfDispenses3;
              if (AspVolume >= 1000)
              {
                MixVolume = 1000;
              }
              else
              {
                if (AspVolume < 250)
                {
                  MixVolume = 250;
                }
                else
                {
                  MixVolume = AspVolume_3;
                }
              }
            }
            if (loopCounter2 == 3)
            {
              AspVolume = AspVolume_4;
              NumberOfDispenses = NumberOfDispenses4;
              if (AspVolume >= 1000)
              {
                MixVolume = 1000;
              }
              else
              {
                if (AspVolume < 250)
                {
                  MixVolume = 250;
                }
                else
                {
                  MixVolume = AspVolume_4;
                }
              }
            }
            Trace ("MainLoopCounter Multidispense    :  ", loopCounter2);
            Trace ("Aspiration volume                :  ", AspVolume);
            Trace ("Pre-Mix volume                   :  ", MixVolume);
            Trace ("Dispense volume                  :  ", i_fltVolume);
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            {
              for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
              {
                loopCounter3 = loopCounter3 + 1;
                Trace ("SubLoopCounter during Multidispense :  ", loopCounter3);
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
                _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              }
            }
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_15.InitCustomDialog("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");
        customDialog_15.ShowCustomDialog();
        retValueDialog = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_16[];
      variable _ColumnIdsArray_16[];
      variable _ColumnNamesArray_16[];
      variable _ExperimentsArray_16[];
      _FilterIdsArray_16.SetSize(0);
      _ColumnNamesArray_16.SetSize(14);
      _ColumnIdsArray_16.SetSize(14);
      _ColumnNamesArray_16.SetAt(0, "RecordId");
      _ColumnIdsArray_16.SetAt(0, 0);
      _ColumnNamesArray_16.SetAt(1, "TRackBC");
      _ColumnIdsArray_16.SetAt(1, 1);
      _ColumnNamesArray_16.SetAt(2, "TLabwareId");
      _ColumnIdsArray_16.SetAt(2, 2);
      _ColumnNamesArray_16.SetAt(3, "TPositionId");
      _ColumnIdsArray_16.SetAt(3, 3);
      _ColumnNamesArray_16.SetAt(4, "TPositionBC");
      _ColumnIdsArray_16.SetAt(4, 4);
      _ColumnNamesArray_16.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_16.SetAt(5, 5);
      _ColumnNamesArray_16.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_16.SetAt(6, 6);
      _ColumnNamesArray_16.SetAt(7, "TVolume");
      _ColumnIdsArray_16.SetAt(7, 7);
      _ColumnNamesArray_16.SetAt(8, "SRackBC");
      _ColumnIdsArray_16.SetAt(8, 8);
      _ColumnNamesArray_16.SetAt(9, "SLabwareId");
      _ColumnIdsArray_16.SetAt(9, 9);
      _ColumnNamesArray_16.SetAt(10, "SPositionId");
      _ColumnIdsArray_16.SetAt(10, 10);
      _ColumnNamesArray_16.SetAt(11, "SPositionBC");
      _ColumnIdsArray_16.SetAt(11, 11);
      _ColumnNamesArray_16.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_16.SetAt(12, 12);
      _ColumnNamesArray_16.SetAt(13, "UserName");
      _ColumnIdsArray_16.SetAt(13, 13);
      _ExperimentsArray_16.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_16, 0, _ColumnIdsArray_16, _ColumnNamesArray_16, _ExperimentsArray_16, "Multidispense_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  _PIP_HVFTMultidispenseFromTroughToPlate <<<<<<<<<<\n-----------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }

  function Trp_MIDIwithCOREGripper( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, variable var_TrackToReadBC, variable var_ParkAfterMove, variable & o_strReadCurrentBarcode ) void {
    private variable GripWidth;
    private variable ret_DestinationLabwareID;
    private variable GripOpening;
    private variable blnPlateCheck;
    private variable intPressOnDistance;
    private variable strCurrentBarcodeRead;
    private variable GripHeight;
    private variable ret_SourceLabwareID;
    private variable retValFoundSubString;
    o_strReadCurrentBarcode = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod:  Move_MIDI_wCOREgrippers <<<<<<<<<<"));
    MECC::TraceComment(Translate("Using CORE grippers for MIDI movements"));
    GripWidth = 80.5;
    GripOpening = 87;
    ret_DestinationLabwareID = SeqGetLabwareId(seq_MIDI_Destination);
    ret_SourceLabwareID = SeqGetLabwareId(seq_MIDI_Source);
    retValFoundSubString = StrFind(ret_SourceLabwareID, Translate("ABGENE"));
    if (retValFoundSubString < 0)
    {
      GripHeight = 15;
    }
    else
    {
      GripHeight = 8;
    }
    if (ret_DestinationLabwareID == "DWP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Source, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Destination, -60, 0, 0);
    }
    if (var_TrackToReadBC > 0)
    {
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      var_TrackToReadBC = 5;
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
        	strCurrentBarcodeRead = arrRetValues[3];
      }
      o_strReadCurrentBarcode = strCurrentBarcodeRead;
      Trace ("Current barcode read by autoload = ", strCurrentBarcodeRead);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      o_strReadCurrentBarcode = Translate("No barcode reading activated");
    }
    blnPlateCheck = 1;
    intPressOnDistance = 1;
    if (ret_DestinationLabwareID == "MIDI_HHS1")
    {
      blnPlateCheck = 0;
      intPressOnDistance = 0;
    }
    if (ret_DestinationLabwareID == "MIDI_HHS2")
    {
      blnPlateCheck = 0;
      intPressOnDistance = 0;
    }
    if (ret_DestinationLabwareID == "MIDI_HHS4")
    {
      blnPlateCheck = 0;
    }
    if (ret_DestinationLabwareID == "MIDI_HHS5")
    {
      blnPlateCheck = 0;
    }
    if (ret_DestinationLabwareID == "DWP_Waste")
    {
      blnPlateCheck = 0;
    }
    if (var_ParkAfterMove == 1)
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    else
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    if (ret_DestinationLabwareID == "DWP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Source, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Destination, 60, 0, 0);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Move_MIDI_wCOREgrippers <<<<<<<<<<\n"));
  }

  function Trp_HSPwithCOREGripper( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, variable var_TrackToReadBC, variable var_ParkAfterMove, variable & o_strReadCurrentBarcode, variable i_intPlateType ) void {
    private variable ret_DestinationLabwareID;
    private variable blnPlateCheck;
    private variable strCurrentBarcodeRead;
    private variable intGripWidth;
    private variable intGripHeight;
    private variable intOpeningWidth;
    o_strReadCurrentBarcode = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod: _Trp_HSPwithCOREGripper <<<<<<<<<"));
    MECC::TraceComment(Translate("Using CORE grippers for HSP movements"));
    ret_DestinationLabwareID = SeqGetLabwareId(seq_HSP_Destination);
    if (ret_DestinationLabwareID == "HSP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_StartingPosition, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_Destination, -60, 0, 0);
    }
    if (i_intPlateType == 1)
    {
      intGripHeight = 5;
      intGripWidth = 81.9;
      intOpeningWidth = 86;
    }
    else
    {
      intGripHeight = 12;
      intGripWidth = 84.9;
      intOpeningWidth = 88.9;
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    if (var_TrackToReadBC > 0)
    {
      var_TrackToReadBC = 5;
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
        	strCurrentBarcodeRead = arrRetValues[3];
      }
      o_strReadCurrentBarcode = strCurrentBarcodeRead;
      Trace ("Current barcode read by autoload = ", strCurrentBarcodeRead);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      o_strReadCurrentBarcode = Translate("No barcode reading activated");
    }
    blnPlateCheck = 0;
    if (ret_DestinationLabwareID == "HSP_CPAC")
    {
      blnPlateCheck = 1;
    }
    if (var_ParkAfterMove == 1)
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    else
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    if (ret_DestinationLabwareID == "HSP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_StartingPosition, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_Destination, 60, 0, 0);
    }
    if (ret_DestinationLabwareID == "HSP_DFP_OnStacker")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_StartingPosition, 35, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_Destination, 35, 0, 0);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  _Trp_HSPwithCOREGripper <<<<<<<<<<\n"));
  }

  function PIP_BeadsFromTubesOrTroughToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolBeads, variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, sequence seq_Mixing, variable i_intBeadTroughMixVolume, variable i_mixCycles, variable i_mixVolume ) void {
    private variable MixVolume2;
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable TotalVolume;
    private variable ChPatternMixing;
    private variable First48Volume;
    private variable loopCounter1;
    private variable RemainingVolume;
    private variable LabwareID_Vial;
    private variable loopCounter2;
    private variable NumberSamplesUpTo48;
    private variable MixVolume1;
    private variable arr_MixVols[];
    private variable intNumberOfSamples;
    private variable strTypeOfLabware;
    private variable strLabwareIDBeads;
    private variable intCurrentTipType;
    private variable i_strLiqidClassNameTransfer;
    private variable intCurrentDispenseMode;
    private variable strCurrentDispenseMode;
    private variable intGetTotalOFSeqDispense;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_BeadsFromTubesOrTroughToPlate <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    _DATA_PlausibilityCheckVolume(i_fltVolBeads, intCurrentTipType);
    strLabwareIDBeads = SeqGetLabwareId(seq_AspirationPosition);
    _DATA_InterpreteLabwareID(strLabwareIDBeads, strTypeOfLabware);
    intNumberOfSamples = seq_DispensePosition.GetCount();
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (strTypeOfLabware == "tube")
      {
        TotalVolume = i_fltVolBeads * intNumberOfSamples;
        if (intNumberOfSamples > 48)
        {
          ChPatternMixing = Translate("11000000");
          First48Volume = i_fltVolBeads * 48;
          RemainingVolume = TotalVolume - First48Volume;
          MixVolume1 = First48Volume / (2 * 1.0);
          MixVolume2 = RemainingVolume / (2 * 1.0);
          if (MixVolume1 > 1000)
          {
            MixVolume1 = 1000;
          }
          if (MixVolume2 > 1000)
          {
            MixVolume2 = 1000;
          }
        }
        else
        {
          ChPatternMixing = Translate("10000000");
          MixVolume1 = TotalVolume / (2 * 1.0);
          if (MixVolume1 > 1000)
          {
            MixVolume1 = 1000;
          }
        }
        Trace ("Volume per sample well:  ", i_fltVolBeads);
        Trace ("Mix volume, channel 1:  ", MixVolume1);
        Trace ("Mix volume, channel 2:  ", MixVolume2);
        arr_MixVols.SetSize(2);
        arr_MixVols.SetAt(1-1, MixVolume1);
        arr_MixVols.SetAt(2-1, MixVolume2);
        MECC::TraceComment(Translate("********* Premix in vial with 1 or 2 1ml Tips ***********"));
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        DATA_TipCounterWrite(ML_STAR);
        if (intNumberOfSamples > 48)
        {
          NumberSamplesMoreThan48 = intNumberOfSamples - 48;
          NumberSamplesUpTo48 = intNumberOfSamples - (2 * NumberSamplesMoreThan48);
        }
        else
        {
          NumberSamplesMoreThan48 = 0;
          NumberSamplesUpTo48 = intNumberOfSamples;
        }
        LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
        PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
        SeqIncrement(seq_AspirationPosition, 1);
        PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
        SeqRemoveAll(seq_AspirationPosition);
        {
          for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
          {
            loopCounter2 = loopCounter2 + 1;
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
          }
        }
        {
          for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
          {
            loopCounter2 = loopCounter2 + 1;
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
          }
        }
        seq_AspirationPosition.SetCurrentPosition(1);
      }
      if (strTypeOfLabware == "trough")
      {
        intGetTotalOFSeqDispense = SeqGetTotal(seq_DispensePosition);
        MECC::TraceComment(Translate("********* Premix in trough ***********\nRK: if more than 8 samples are processed, mix with 8 channels. Also different mixing heights\n"));
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        DATA_TipCounterWrite(ML_STAR);
      }
      MECC::TraceComment(Translate("********** Now pipetting beads to destination plate"));
      if (intCurrentTipType == 1)
      {
        {
          loopCounter1 = 0;
          while (
             (seq_DispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips300, 1);
            loopCounter1 = loopCounter1 + 1;
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            }
            else
            {
              if (loopCounter1 == 1)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            if(0){
              if (i_fltVolBeads == 31)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            }
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips300.SetMax(seq_Tips300.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
      }
      if (intCurrentTipType == 5)
      {
        {
          loopCounter1 = 0;
          while (
             (seq_DispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips1000, 1);
            loopCounter1 = loopCounter1 + 1;
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            }
            else
            {
              if (loopCounter1 == 1)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            }
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
      }
      if (intCurrentTipType == 23)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        {
          loopCounter1 = 0;
          while (
             (seq_DispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips50, 1);
            loopCounter1 = loopCounter1 + 1;
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            }
            else
            {
              if (loopCounter1 == 1)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            }
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips50.SetMax(seq_Tips50.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
      }
      if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      if (intCurrentTipType == 23)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    if (strCurrentDispenseMode == "Part")
    {
      _PIP_HVFTMultidispenseFromTroughToPlate(ML_STAR, seq_AspirationPosition, seq_DispensePosition, i_fltVolBeads, i_strLiqidClassNameTransfer);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_17[];
      variable _ColumnIdsArray_17[];
      variable _ColumnNamesArray_17[];
      variable _ExperimentsArray_17[];
      _FilterIdsArray_17.SetSize(0);
      _ColumnNamesArray_17.SetSize(14);
      _ColumnIdsArray_17.SetSize(14);
      _ColumnNamesArray_17.SetAt(0, "RecordId");
      _ColumnIdsArray_17.SetAt(0, 0);
      _ColumnNamesArray_17.SetAt(1, "TRackBC");
      _ColumnIdsArray_17.SetAt(1, 1);
      _ColumnNamesArray_17.SetAt(2, "TLabwareId");
      _ColumnIdsArray_17.SetAt(2, 2);
      _ColumnNamesArray_17.SetAt(3, "TPositionId");
      _ColumnIdsArray_17.SetAt(3, 3);
      _ColumnNamesArray_17.SetAt(4, "TPositionBC");
      _ColumnIdsArray_17.SetAt(4, 4);
      _ColumnNamesArray_17.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_17.SetAt(5, 5);
      _ColumnNamesArray_17.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_17.SetAt(6, 6);
      _ColumnNamesArray_17.SetAt(7, "TVolume");
      _ColumnIdsArray_17.SetAt(7, 7);
      _ColumnNamesArray_17.SetAt(8, "SRackBC");
      _ColumnIdsArray_17.SetAt(8, 8);
      _ColumnNamesArray_17.SetAt(9, "SLabwareId");
      _ColumnIdsArray_17.SetAt(9, 9);
      _ColumnNamesArray_17.SetAt(10, "SPositionId");
      _ColumnIdsArray_17.SetAt(10, 10);
      _ColumnNamesArray_17.SetAt(11, "SPositionBC");
      _ColumnIdsArray_17.SetAt(11, 11);
      _ColumnNamesArray_17.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_17.SetAt(12, 12);
      _ColumnNamesArray_17.SetAt(13, "UserName");
      _ColumnIdsArray_17.SetAt(13, 13);
      _ExperimentsArray_17.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_17, 0, _ColumnIdsArray_17, _ColumnNamesArray_17, _ExperimentsArray_17, "Beads_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_BeadsFromTubesOrTroughToPlate<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_GetTipTypeAndDispenseModeOfLiquidClass( variable i_strLiquidClassName, variable & o_intTiptype, variable & o_intDispenseMode ) void {
    o_intTiptype = 0;
    o_intDispenseMode = 0;
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(i_strLiquidClassName);
    o_intTiptype = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    o_intDispenseMode = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::DispenseMode);
    Trace ("Liquid class name :  ", i_strLiquidClassName, ", Tiptype = ", o_intTiptype, ", DispenseMode = ", o_intDispenseMode);
  }

  private function Abstract(  ) void {
    MECC::TraceComment(Translate("*********************************************************************\nSubmethod Library:  NGSStarProccesses\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate:  Februrary 06, 2018 (By Stephan Grosch)\nVersion:  0.2.2\n\n09/18/2017 - V 0.1 Programmed protocol based on TruSeqProcesses v3.0.6 written by Jon Engebretsen, Hamilton Company, San Diego, CA\nRevision history: more informaiton at smt _Version\n\n*********************************************************************"));
  }

  function DATA_HandoverSequencesAndDataToSMT( sequence & i_seqTip50Filter, sequence & i_seqTip300Filter, sequence & i_seqTipRocket, sequence & i_seqTip1000Filter, sequence & i_seqTip5mlFilter, sequence & i_seqCOREGripper, variable i_blnSimulationON, variable i_strKitName ) void {
    private variable strCurrentTime;
    private variable strCurrentDate;
    private variable strLabIDTarget;
    private variable strTransferVolume;
    private variable strPosIDTarget;
    private variable strTime;
    private variable strDate;
    private variable strLabIDSource;
    private variable strPosIDSource;
    private file NGSStar384ReportFile;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_HandoverSequencesAndDataToSMT<<<<<<<<<<"));
    SeqRemoveAll(seq_Tips50);
    SeqRemoveAll(seq_Tips300);
    SeqRemoveAll(seq_TipsRocket);
    SeqRemoveAll(seq_Tips1000);
    SeqRemoveAll(seq_Tips5ml);
    SeqCopySequence(seq_Tips50, i_seqTip50Filter);
    SeqCopySequence(seq_Tips300, i_seqTip300Filter);
    SeqCopySequence(seq_TipsRocket, i_seqTipRocket);
    SeqCopySequence(seq_Tips1000, i_seqTip1000Filter);
    SeqCopySequence(seq_Tips5ml, i_seqTip5mlFilter);
    SeqRemoveAll(seq_COREGripper);
    SeqCopySequence(seq_COREGripper, i_seqCOREGripper);
    intStartPositionTip50 = seq_Tips50.GetCurrentPosition();
    intStartPositionTip300 = seq_Tips300.GetCurrentPosition();
    intStartPositionTipRocket = seq_TipsRocket.GetCurrentPosition();
    intStartPositionTip1000 = seq_Tips1000.GetCurrentPosition();
    intStartPositionTip5ml = seq_Tips5ml.GetCurrentPosition();
    strTipCounterNameTip50 = Translate("NGSStar384Tip_50F_Counter");
    strTipCounterNameTip300 = Translate("NGSStar384Tip_SVF_Counter");
    strTipCounterNameTipRocket = Translate("NGSStar384Tip_RocketTip_Counter");
    strTipCounterNameTip1000 = Translate("NGSStar384Tip_HVF_Counter");
    strTipCounterNameTip5ml = Translate("NGSStar384Tip_5F_Counter");
    _intConsumedTips50BeforeRelaodTips = 0;
    _intConsumedTips300BeforeRelaodTips = 0;
    _intConsumedTipsRocketBeforeRelaodTips = 0;
    _intConsumedTips1000BeforeRelaodTips = 0;
    _intConsumedTips5mlBeforeRelaodTips = 0;
    _intConsumedTips50 = 0;
    _intConsumedTips300 = 0;
    _intConsumedTipsRocket = 0;
    _intConsumedTips1000 = 0;
    _intConsumedTips5ml = 0;
    _intTotalConsumedTips50 = 0;
    _intTotalConsumedTips300 = 0;
    _intTotalConsumedTipsRocket = 0;
    _intTotalConsumedTips1000 = 0;
    _intTotalConsumedTips5ml = 0;
    _blnSimulationModeON = i_blnSimulationON;
    if( 0 == ProccessTimer.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    strCurrentDate = TimGetFormattedDate(Translate("%Y%m%d"));
    strCurrentTime = TimGetFormattedTime(Translate("%H%M%S"));
    _strFullPathReportFile = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\"), strCurrentDate, Translate("_"), strCurrentTime, Translate("_"), Translate("NGSStar384Report"), Translate("_"), i_strKitName, Translate(".xls"), Translate(""), Translate(""), Translate(""));
    NGSStar384ReportFile.SetExtendedProperties( "HDR=NO");
    NGSStar384ReportFile.AddField("Date", strDate, hslString, 255);
    NGSStar384ReportFile.AddField("Time", strTime, hslString, 255);
    NGSStar384ReportFile.AddField("LabID Source", strLabIDSource, hslString, 255);
    NGSStar384ReportFile.AddField("PosID Source", strPosIDSource, hslString, 255);
    NGSStar384ReportFile.AddField("Transfer Volume", strTransferVolume, hslString, 255);
    NGSStar384ReportFile.AddField("LabID Target", strLabIDTarget, hslString, 255);
    NGSStar384ReportFile.AddField("PosID Target", strPosIDTarget, hslString, 255);
    if( 0 == NGSStar384ReportFile.Open(_strFullPathReportFile + " " + "RuntimeReport", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFullPathReportFile, "HxMetEdCompCmd");
    }
    if( 0 != NGSStar384ReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NGSStar384ReportFile.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_HandoverSequencesAndDataToSMT<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _Version(  ) void {
  }

  private function _DATA_PlausibilityCheckVolume( variable i_fltVolumeToBeChecked, variable i_intTipTypeToBeChecked ) void {
    private variable flt_volumeMax;
    private dialog customDialog_18;
    private variable strTipType;
    private variable retValueDialog;
    private dialog customDialog_19;
    private variable flt_volumeMin;
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod:  _DATA_PlausibilityCheckVolume<<<<<<<<<<"));
    Trace ("Volume to be checked vs tiptype:  ", i_fltVolumeToBeChecked, " - current tiptype : ", i_intTipTypeToBeChecked);
    if (i_intTipTypeToBeChecked == 0)
    {
      flt_volumeMax = 300;
      flt_volumeMin = 10;
      strTipType = Translate("Standard Volume Tip - SVT - 300ul");
    }
    if (i_intTipTypeToBeChecked == 1)
    {
      flt_volumeMax = 300;
      flt_volumeMin = 10;
      strTipType = Translate("Standard Volume Filter Tip - SVFT - 300ul");
    }
    if (i_intTipTypeToBeChecked == 4)
    {
      flt_volumeMax = 1000;
      flt_volumeMin = 15;
      strTipType = Translate("High Volume Tip - HVT - 1000ul");
    }
    if (i_intTipTypeToBeChecked == 5)
    {
      flt_volumeMax = 1000;
      flt_volumeMin = 15;
      strTipType = Translate("High Volume Filter Tip - HVFT - 1000ul");
    }
    if (i_intTipTypeToBeChecked == 23)
    {
      flt_volumeMax = 50;
      flt_volumeMin = 1;
      strTipType = Translate("Low Volume Filter Tip - LVFT - 50ul");
    }
    if (i_intTipTypeToBeChecked == 28)
    {
      flt_volumeMax = 300;
      flt_volumeMin = 10;
      strTipType = Translate("Rocket Tip for 384MPH - 300ul");
    }
    if (i_fltVolumeToBeChecked <= flt_volumeMax)
    {
      if (i_fltVolumeToBeChecked < flt_volumeMin)
      {
        Trace ("Volume check failed.");
        customDialog_19.InitCustomDialog("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");
        customDialog_19.SetCustomDialogProperty( "textBox1.Text", i_fltVolumeToBeChecked );
        customDialog_19.SetCustomDialogProperty( "textBox2.Text", strTipType );
        customDialog_19.ShowCustomDialog();
        retValueDialog = customDialog_19.GetCustomDialogProperty( "ReturnValue" );
        if (retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
        else
        {
          Trace ("Volume check failed - user decided to use a volume that is less then the recommended minimum for the tiptype used.");
        }
      }
      else
      {
        Trace ("Volume check passed.");
      }
    }
    else
    {
      Trace ("Volume check failed.");
      customDialog_18.InitCustomDialog("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");
      customDialog_18.SetCustomDialogProperty( "textBox1.Text", i_fltVolumeToBeChecked );
      customDialog_18.SetCustomDialogProperty( "textBox2.Text", strTipType );
      customDialog_18.ShowCustomDialog();
      retValueDialog = customDialog_18.GetCustomDialogProperty( "ReturnValue" );
      if (retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  _DATA_PlausibilityCheckVolume <<<<<<<<<<\n"));
  }

  function DATA_OverdryingProtection( timer & i_strOverdryingTimerName, variable i_intIncubationTimeForTheFollowingStep, variable i_blnStartNewTimer, variable & o_intIncubationTimeForTheFollowingStepModified ) void {
    private variable intElapsedTime;
    private variable intOriginalIncubationTimeForTheFollowingStep;
    o_intIncubationTimeForTheFollowingStepModified = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_OverdryingProtection<<<<<<<<<<"));
    if (i_blnStartNewTimer == ASWGLOBAL::BOOL::TRUE)
    {
      if( 0 == i_strOverdryingTimerName.SetTimer(hslInfinite) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      Trace ("Overdrying timer started:  ", i_strOverdryingTimerName);
    }
    else
    {
      intElapsedTime = i_strOverdryingTimerName.GetElapsedTime();
      intOriginalIncubationTimeForTheFollowingStep = i_intIncubationTimeForTheFollowingStep;
      o_intIncubationTimeForTheFollowingStepModified = i_intIncubationTimeForTheFollowingStep - intElapsedTime;
      Trace ("Read elapsed time of Overdrying Timer:  ",intElapsedTime, "seconds");
      Trace ("Original incubation time for the following incubation step:  ", intOriginalIncubationTimeForTheFollowingStep," seconds.");
      Trace ("Reduced incubation time for the following incubation step:  ", o_intIncubationTimeForTheFollowingStepModified," seconds.");
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_OverdryingProtection<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_Liquid_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMix ) void {
    private variable strCurrentDispenseMode;
    private variable intCurrentDispenseMode;
    private variable loopCounter1;
    private variable intCurrentTipType;
    private dialog customDialog_20;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (intCurrentTipType == 1)
      {
        {
          loopCounter1 = 0;
          while (
             (seq_AspirationPosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips300, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips300.SetMax(seq_Tips300.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
      }
      if (intCurrentTipType == 5)
      {
        {
          loopCounter1 = 0;
          while (
             (seq_AspirationPosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips1000, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
      }
      if (intCurrentTipType == 23)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        {
          loopCounter1 = 0;
          while (
             (seq_AspirationPosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips50, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips50.SetMax(seq_Tips50.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_20.InitCustomDialog("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");
      customDialog_20.ShowCustomDialog();
      retValueDialog = customDialog_20.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_21[];
      variable _ColumnIdsArray_21[];
      variable _ColumnNamesArray_21[];
      variable _ExperimentsArray_21[];
      _FilterIdsArray_21.SetSize(0);
      _ColumnNamesArray_21.SetSize(14);
      _ColumnIdsArray_21.SetSize(14);
      _ColumnNamesArray_21.SetAt(0, "RecordId");
      _ColumnIdsArray_21.SetAt(0, 0);
      _ColumnNamesArray_21.SetAt(1, "TRackBC");
      _ColumnIdsArray_21.SetAt(1, 1);
      _ColumnNamesArray_21.SetAt(2, "TLabwareId");
      _ColumnIdsArray_21.SetAt(2, 2);
      _ColumnNamesArray_21.SetAt(3, "TPositionId");
      _ColumnIdsArray_21.SetAt(3, 3);
      _ColumnNamesArray_21.SetAt(4, "TPositionBC");
      _ColumnIdsArray_21.SetAt(4, 4);
      _ColumnNamesArray_21.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_21.SetAt(5, 5);
      _ColumnNamesArray_21.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_21.SetAt(6, 6);
      _ColumnNamesArray_21.SetAt(7, "TVolume");
      _ColumnIdsArray_21.SetAt(7, 7);
      _ColumnNamesArray_21.SetAt(8, "SRackBC");
      _ColumnIdsArray_21.SetAt(8, 8);
      _ColumnNamesArray_21.SetAt(9, "SLabwareId");
      _ColumnIdsArray_21.SetAt(9, 9);
      _ColumnNamesArray_21.SetAt(10, "SPositionId");
      _ColumnIdsArray_21.SetAt(10, 10);
      _ColumnNamesArray_21.SetAt(11, "SPositionBC");
      _ColumnIdsArray_21.SetAt(11, 11);
      _ColumnNamesArray_21.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_21.SetAt(12, 12);
      _ColumnNamesArray_21.SetAt(13, "UserName");
      _ColumnIdsArray_21.SetAt(13, 13);
      _ExperimentsArray_21.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_21, 0, _ColumnIdsArray_21, _ColumnNamesArray_21, _ExperimentsArray_21, "PlateLiquidToPlate.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_IncubationTimer( timer & i_strIncubationTimerName, variable i_intTime ) void {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_IncubationTimer<<<<<<<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      Trace ("Timer name : ", i_strIncubationTimerName);
      Trace ("Time to be perfomed:  ", i_intTime);
      if( 0 == i_strIncubationTimerName.SetTimer(i_intTime) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == i_strIncubationTimerName.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    else
    {
      Trace ("Simulation Mode - skip timer : ", i_strIncubationTimerName);
      Trace ("Time to be perfomed:  ", i_intTime);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_IncubationTimer<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_CheckPlatesInStacks( device & ML_STAR, sequence & seq_Stack1, sequence & seq_Stack2, variable var_Stack1Expected, variable var_Stack2Expected, variable & var_Result, variable & msg_Result ) void {
    private variable PlateNumber_TopStack1;
    private variable PlateNumber_TopStack2;
    private variable PlateNumber_TopStack1_int;
    private variable PlateNumber_TopStack2_int;
    private variable strCurrentLabID;
    private variable intMaxNumberOfPlatesWithinCurrentStack;
    private variable loopCounter1;
    var_Result = 0;
    msg_Result = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Start Submethod : DATA_CheckPlatesInStacks<<<<<<<<<<"));
    msg_Result = Translate("Results of Checking Plates in Stacks:\n");
    var_Result = 0;
    PlateNumber_TopStack1 = Translate("");
    PlateNumber_TopStack2 = Translate("");
    if (var_Stack1Expected > 0)
    {
      TrcTraceSequence(seq_Stack1);
      if (_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        PlateNumber_TopStack1_int = var_Stack1Expected;
        PlateNumber_TopStack1 = Translate("1");
      }
      else
      {
        intMaxNumberOfPlatesWithinCurrentStack = SeqGetMax(seq_Stack1);
        {
          for(loopCounter1 = 0; loopCounter1 < intMaxNumberOfPlatesWithinCurrentStack;)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_22 ;
            err.Clear();
            {
              	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
            }
            strCurrentLabID = SeqGetLabwareId(seq_Stack1);
            PlateNumber_TopStack1 = StrRight(strCurrentLabID, 1);
            PlateNumber_TopStack1_int = StrIVal(PlateNumber_TopStack1);
            break;
            errLabel_22 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              SeqIncrement(seq_Stack1, 1);
            }   /* end if from skip handler if no error */
          }
        }
        if (PlateNumber_TopStack1 == "")
        {
          PlateNumber_TopStack1_int = 0;
        }
      }
      Trace ("The number of plates found in Stack 1:  ", PlateNumber_TopStack1_int);
      Trace ("Expected number of plates for Stack 1:  ", var_Stack1Expected);
      if (PlateNumber_TopStack1_int == var_Stack1Expected)
      {
        msg_Result = msg_Result + Translate("\nThe correct number of plates are in Stack1.");
      }
      else
      {
        msg_Result = msg_Result + Translate("\nWARNING:  Wrong number of plates is in Stack1.  Expected:  ");
        msg_Result = StrConcat2(msg_Result, var_Stack1Expected);
        msg_Result = msg_Result + Translate(" Found:  ");
        msg_Result = StrConcat2(msg_Result, PlateNumber_TopStack1_int);
        var_Result = 1;
        SeqResetSequenceIndexes(seq_Stack1);
      }
    }
    if (var_Stack2Expected > 0)
    {
      TrcTraceSequence(seq_Stack2);
      if (_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        PlateNumber_TopStack2_int = var_Stack2Expected;
        PlateNumber_TopStack2 = Translate("1");
      }
      else
      {
        intMaxNumberOfPlatesWithinCurrentStack = SeqGetMax(seq_Stack2);
        {
          for(loopCounter1 = 0; loopCounter1 < intMaxNumberOfPlatesWithinCurrentStack;)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_23 ;
            err.Clear();
            {
              	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
            }
            strCurrentLabID = SeqGetLabwareId(seq_Stack2);
            PlateNumber_TopStack2 = StrRight(strCurrentLabID, 1);
            PlateNumber_TopStack2_int = StrIVal(PlateNumber_TopStack2);
            break;
            errLabel_23 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              SeqIncrement(seq_Stack2, 1);
            }   /* end if from skip handler if no error */
          }
        }
        if (PlateNumber_TopStack2 == "")
        {
          PlateNumber_TopStack2_int = 0;
        }
      }
      Trace ("The number of plates found in Stack 2:  ", PlateNumber_TopStack2_int);
      Trace ("Expected number of plates for Stack 2:  ", var_Stack2Expected);
      if (PlateNumber_TopStack2_int == var_Stack2Expected)
      {
        msg_Result = msg_Result + Translate("\nThe correct number of plates are in Stack2.");
      }
      else
      {
        msg_Result = msg_Result + Translate("\nWARNING:  Wrong number of plates is in Stack2.  Expected:  ");
        msg_Result = StrConcat2(msg_Result, var_Stack2Expected);
        msg_Result = msg_Result + Translate(" Found:  ");
        msg_Result = StrConcat2(msg_Result, PlateNumber_TopStack2_int);
        var_Result = 1;
        SeqResetSequenceIndexes(seq_Stack2);
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate(">>>>>>>>>>Submethod Complete : DATA_CheckPlatesInStacks<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_TipCounterWrite( device & ML_STAR ) void {
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  DATA_TipCounterWrite<<<<<<<<<<"));
    TipCount::Write2(seq_Tips50, strTipCounterNameTip50, ML_STAR);
    TipCount::Write2(seq_Tips300, strTipCounterNameTip300, ML_STAR);
    TipCount::Write2(seq_TipsRocket, strTipCounterNameTipRocket, ML_STAR);
    TipCount::Write2(seq_Tips5ml, strTipCounterNameTip5ml, ML_STAR);
    TipCount::Write2(seq_Tips1000, strTipCounterNameTip1000, ML_STAR);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_TipCounterWrite <<<<<<<<<<\n"));
  }

  private function _PIP_SVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_fltDispenseHeightFromBottom ) void {
    private dialog customDialog_24;
    private variable NumberOfAliquotsPerAsp4;
    private variable strCurrentDispenseMode;
    private variable intMaximalDispensesPerAspiration;
    private variable AspVolume;
    private variable strTypeOfLabware;
    private variable intMaximalDispensesPer2Aspirations;
    private variable NumberOfRemainingWells;
    private variable NumberOfColumns;
    private variable intMaximalDispensesPer3Aspirations;
    private variable intLabwareTypeIsABeadsTrough;
    private variable NumberOfDispenses1;
    private variable MixVolume;
    private variable intMixCycles;
    private variable intNumberOfSamples;
    private variable NumberOfDispenses2;
    private variable AspVolume_1;
    private variable NumberOfDispenses3;
    private variable strLabwareIDAspiration;
    private variable NumberOfDispenses4;
    private variable AspVolume_2;
    private variable AspVolume_3;
    private variable intCurrentDispenseMode;
    private variable AspVolume_4;
    private variable intCurrentTipType;
    private variable loopCounter2;
    private variable fltMaximalDispensesPerAspiration;
    private variable loopCounter3;
    private variable NumberOfAliquotsPerAsp1;
    private variable strStepReturnValueDispense;
    private variable NumberOfAliquotsPerAsp2;
    private variable NumberOfDispenses;
    private variable strStepReturnValueAspiration;
    private variable NumberOfAliquotsPerAsp3;
    private variable NumberOfAspirations;
    private variable retValueDialog;
    MECC::TraceComment(Translate("ииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииии\n>>>>>>>>>> Submethod:  _PIP_SVFTMultidispenseFromTroughToPlate<<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    strLabwareIDAspiration = SeqGetLabwareId(seq_AspirationPosition);
    intLabwareTypeIsABeadsTrough = StrFind(strLabwareIDAspiration, Translate("Beads"));
    if (intLabwareTypeIsABeadsTrough > 0)
    {
      MECC::TraceComment(Translate("Reagent trough  contains beads --> mix cycles = 6 during aspiration"));
      intMixCycles = 6;
    }
    else
    {
      intMixCycles = 0;
    }
    Trace ("mix cycles during aspiration:  ", intMixCycles);
    _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
    intNumberOfSamples = seq_DispensePosition.GetCount();
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    Trace ("Current dispense mode:  ", strCurrentDispenseMode);
    if (strCurrentDispenseMode == "Part")
    {
      if (intCurrentTipType == 1)
      {
        Trace ("Volume per well:  ", i_fltVolume);
        MECC::TraceComment(Translate("Calculations for dispensing ..........."));
        NumberOfCompleteColumns = intNumberOfSamples / 8;
        NumberOfRemainingWells = intNumberOfSamples % 8;
        Trace ("Number of Complete Columns in Destination Plate:  ", NumberOfCompleteColumns);
        Trace ("Number of Wells in Last, Incomplete Column:  ", NumberOfRemainingWells);
        if (NumberOfRemainingWells > 0)
        {
          NumberOfColumns = NumberOfCompleteColumns + 1;
        }
        else
        {
          NumberOfColumns = NumberOfCompleteColumns;
        }
        Trace ("Total Number of Columns:  ", NumberOfColumns);
        fltMaximalDispensesPerAspiration = 300 / (i_fltVolume * 1.0);
        intMaximalDispensesPerAspiration = MthFloor(fltMaximalDispensesPerAspiration);
        intMaximalDispensesPerAspiration = intMaximalDispensesPerAspiration - 2;
        Trace ("Maximal Number of Dispenses per Aspiration = ", intMaximalDispensesPerAspiration);
        NumberOfAspirations = NumberOfColumns / (intMaximalDispensesPerAspiration * 1.0);
        NumberOfAspirations = MthCeiling(NumberOfAspirations);
        if (NumberOfAspirations == 1)
        {
          if (NumberOfColumns < intMaximalDispensesPerAspiration)
          {
            MECC::TraceComment(Translate("Number of columns are less then Maximal Dispenses per Aspiration"));
            NumberOfDispenses1 = NumberOfColumns;
          }
          else
          {
            MECC::TraceComment(Translate("Number of columns are equal to Maximal Dispenses per Aspiration"));
            NumberOfDispenses1 = intMaximalDispensesPerAspiration;
          }
          NumberOfDispenses2 = 0;
          NumberOfDispenses3 = 0;
          NumberOfDispenses4 = 0;
        }
        if (NumberOfAspirations == 2)
        {
          NumberOfDispenses1 = intMaximalDispensesPerAspiration;
          NumberOfDispenses2 = NumberOfColumns - intMaximalDispensesPerAspiration;
          NumberOfDispenses3 = 0;
        }
        if (NumberOfAspirations == 3)
        {
          NumberOfDispenses1 = intMaximalDispensesPerAspiration;
          NumberOfDispenses2 = intMaximalDispensesPerAspiration;
          intMaximalDispensesPer2Aspirations = intMaximalDispensesPerAspiration * 2;
          NumberOfDispenses3 = NumberOfColumns - intMaximalDispensesPer2Aspirations;
        }
        if (NumberOfAspirations == 4)
        {
          NumberOfDispenses1 = intMaximalDispensesPerAspiration;
          NumberOfDispenses2 = intMaximalDispensesPerAspiration;
          NumberOfDispenses3 = intMaximalDispensesPerAspiration;
          intMaximalDispensesPer3Aspirations = intMaximalDispensesPerAspiration * 3;
          NumberOfDispenses4 = NumberOfColumns - intMaximalDispensesPer3Aspirations;
        }
        if (NumberOfDispenses1 > 0)
        {
          NumberOfAliquotsPerAsp1 = NumberOfDispenses1 + 2;
          AspVolume_1 = i_fltVolume * NumberOfAliquotsPerAsp1;
        }
        if (NumberOfDispenses2 > 0)
        {
          NumberOfAliquotsPerAsp2 = NumberOfDispenses2 + 2;
          AspVolume_2 = i_fltVolume * NumberOfAliquotsPerAsp2;
        }
        else
        {
          AspVolume_2 = 0;
          AspVolume_3 = 0;
          AspVolume_4 = 0;
        }
        if (NumberOfDispenses3 > 0)
        {
          NumberOfAliquotsPerAsp3 = NumberOfDispenses3 + 2;
          AspVolume_3 = i_fltVolume * NumberOfAliquotsPerAsp3;
        }
        else
        {
          AspVolume_3 = 0;
          AspVolume_4 = 0;
        }
        if (NumberOfDispenses4 > 0)
        {
          NumberOfAliquotsPerAsp4 = NumberOfDispenses4 + 2;
          AspVolume_4 = i_fltVolume * NumberOfAliquotsPerAsp4;
        }
        else
        {
          AspVolume_4 = 0;
        }
        Trace ("Number of Aspirations:  ", NumberOfAspirations);
        Trace ("Number of Columns for the first set of dispenses:  ", NumberOfDispenses1);
        Trace ("Number of Columns for the second set of dispenses:  ", NumberOfDispenses2);
        Trace ("Number of Columns for the third set of dispenses:  ", NumberOfDispenses3);
        Trace ("Number of Columns for the fourth set of dispenses:  ", NumberOfDispenses4);
        Trace ("Aspiration volume for the first set of dispenses:  ", AspVolume_1);
        Trace ("Aspiration volume for the second set of dispenses:  ", AspVolume_2);
        Trace ("Aspiration volume for the third set of dispenses:  ", AspVolume_3);
        Trace ("Aspiration volume for the fourth set of dispenses:  ", AspVolume_4);
        if (AspVolume_1 > 0)
        {
          _DATA_PlausibilityCheckVolume(AspVolume_1, 5);
        }
        if (AspVolume_2 > 0)
        {
          _DATA_PlausibilityCheckVolume(AspVolume_2, 5);
        }
        if (AspVolume_3 > 0)
        {
          _DATA_PlausibilityCheckVolume(AspVolume_3, 5);
        }
        if (AspVolume_4 > 0)
        {
          _DATA_PlausibilityCheckVolume(AspVolume_4, 5);
        }
        MECC::TraceComment(Translate("********** Fill plate  ..........."));
        TrcTraceSequence(seq_DispensePosition);
        {
          loopCounter2 = 0;
          while (
             (seq_DispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips300, 1);
            loopCounter2 = loopCounter2 + 1;
            if (loopCounter2 == 1)
            {
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              AspVolume = AspVolume_1;
              NumberOfDispenses = NumberOfDispenses1;
              if(0){
                if (AspVolume >= 300)
                {
                  MixVolume = 300;
                }
                else
                {
                  if (AspVolume < 75)
                  {
                    MixVolume = 75;
                  }
                  else
                  {
                    MixVolume = AspVolume_1;
                  }
                }
              }
            }
            if (loopCounter2 == 2)
            {
              AspVolume = AspVolume_2;
              NumberOfDispenses = NumberOfDispenses2;
              if(0){
                if (AspVolume >= 300)
                {
                  MixVolume = 300;
                }
                else
                {
                  if (AspVolume < 75)
                  {
                    MixVolume = 75;
                  }
                  else
                  {
                    MixVolume = AspVolume_2;
                  }
                }
              }
            }
            if (loopCounter2 == 3)
            {
              AspVolume = AspVolume_3;
              NumberOfDispenses = NumberOfDispenses3;
              if(0){
                if (AspVolume >= 300)
                {
                  MixVolume = 300;
                }
                else
                {
                  if (AspVolume < 75)
                  {
                    MixVolume = 75;
                  }
                  else
                  {
                    MixVolume = AspVolume_3;
                  }
                }
              }
            }
            if (loopCounter2 == 3)
            {
              AspVolume = AspVolume_4;
              NumberOfDispenses = NumberOfDispenses4;
              if(0){
                if (AspVolume >= 300)
                {
                  MixVolume = 300;
                }
                else
                {
                  if (AspVolume < 75)
                  {
                    MixVolume = 75;
                  }
                  else
                  {
                    MixVolume = AspVolume_4;
                  }
                }
              }
            }
            Trace ("MainLoopCounter Multidispense    :  ", loopCounter2);
            Trace ("Aspiration volume                :  ", AspVolume);
            Trace ("Pre-Mix volume                   :  ", MixVolume);
            Trace ("Dispense volume                  :  ", i_fltVolume);
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            {
              for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
              {
                loopCounter3 = loopCounter3 + 1;
                Trace ("SubLoopCounter during Multidispense :  ", loopCounter3);
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
                _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              }
            }
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips300.SetMax(seq_Tips300.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_24.InitCustomDialog("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");
        customDialog_24.ShowCustomDialog();
        retValueDialog = customDialog_24.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_25[];
      variable _ColumnIdsArray_25[];
      variable _ColumnNamesArray_25[];
      variable _ExperimentsArray_25[];
      _FilterIdsArray_25.SetSize(0);
      _ColumnNamesArray_25.SetSize(14);
      _ColumnIdsArray_25.SetSize(14);
      _ColumnNamesArray_25.SetAt(0, "RecordId");
      _ColumnIdsArray_25.SetAt(0, 0);
      _ColumnNamesArray_25.SetAt(1, "TRackBC");
      _ColumnIdsArray_25.SetAt(1, 1);
      _ColumnNamesArray_25.SetAt(2, "TLabwareId");
      _ColumnIdsArray_25.SetAt(2, 2);
      _ColumnNamesArray_25.SetAt(3, "TPositionId");
      _ColumnIdsArray_25.SetAt(3, 3);
      _ColumnNamesArray_25.SetAt(4, "TPositionBC");
      _ColumnIdsArray_25.SetAt(4, 4);
      _ColumnNamesArray_25.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_25.SetAt(5, 5);
      _ColumnNamesArray_25.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_25.SetAt(6, 6);
      _ColumnNamesArray_25.SetAt(7, "TVolume");
      _ColumnIdsArray_25.SetAt(7, 7);
      _ColumnNamesArray_25.SetAt(8, "SRackBC");
      _ColumnIdsArray_25.SetAt(8, 8);
      _ColumnNamesArray_25.SetAt(9, "SLabwareId");
      _ColumnIdsArray_25.SetAt(9, 9);
      _ColumnNamesArray_25.SetAt(10, "SPositionId");
      _ColumnIdsArray_25.SetAt(10, 10);
      _ColumnNamesArray_25.SetAt(11, "SPositionBC");
      _ColumnIdsArray_25.SetAt(11, 11);
      _ColumnNamesArray_25.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_25.SetAt(12, 12);
      _ColumnNamesArray_25.SetAt(13, "UserName");
      _ColumnIdsArray_25.SetAt(13, 13);
      _ExperimentsArray_25.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_25, 0, _ColumnIdsArray_25, _ColumnNamesArray_25, _ExperimentsArray_25, "Multidispense_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  _PIP_HVFTMultidispenseFromTroughToPlate <<<<<<<<<<\n-----------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }

  function PIP_TransferSamples_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable & i_arrVolumes[], variable i_intDispenseHeight, variable i_intMixCyclesOnDispense, variable i_intMixingVolume ) void {
    private dialog customDialog_26;
    private variable strCurrentDispenseMode;
    private variable loopCounter1;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable retValueDialog;
    private variable intArrayIndex;
    private variable fltVolume;
    private variable intArraySize;
    private variable loopCounter3;
    private variable fltVolumeMax;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_TransferSamples_SingleDispenseFromPlateToPlate <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    if (i_fltVolume == 0)
    {
      intArraySize=i_arrVolumes.GetSize();
      fltVolume=i_arrVolumes.GetAt(1-1);
      fltVolumeMax = fltVolume;
      {
        for(loopCounter3 = 0; loopCounter3 < intArraySize;)
        {
          loopCounter3 = loopCounter3 + 1;
          fltVolume=i_arrVolumes.GetAt(loopCounter3-1);
          if (fltVolume > fltVolumeMax)
          {
            fltVolumeMax = fltVolume;
          }
        }
      }
      _DATA_PlausibilityCheckVolume(fltVolumeMax, intCurrentTipType);
    }
    else
    {
      _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
    }
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (i_fltVolume > 0)
      {
        if (intCurrentTipType == 23)
        {
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          {
            loopCounter1 = 0;
            while (
               (seq_AspirationPosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips50, 1);
              loopCounter1 = loopCounter1 + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
            seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            seq_AspirationPosition.SetCurrentPosition(1);
            seq_DispensePosition.SetCurrentPosition(1);
          }
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
      }
      else
      {
        intArrayIndex = 1;
        if (intCurrentTipType == 23)
        {
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          {
            loopCounter1 = 0;
            while (
               (seq_AspirationPosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips50, 1);
              loopCounter1 = loopCounter1 + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              intArrayIndex = intArrayIndex + 8;
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
            seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            seq_AspirationPosition.SetCurrentPosition(1);
            seq_DispensePosition.SetCurrentPosition(1);
          }
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_26.InitCustomDialog("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");
      customDialog_26.ShowCustomDialog();
      retValueDialog = customDialog_26.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_27[];
      variable _ColumnIdsArray_27[];
      variable _ColumnNamesArray_27[];
      variable _ExperimentsArray_27[];
      _FilterIdsArray_27.SetSize(0);
      _ColumnNamesArray_27.SetSize(14);
      _ColumnIdsArray_27.SetSize(14);
      _ColumnNamesArray_27.SetAt(0, "RecordId");
      _ColumnIdsArray_27.SetAt(0, 0);
      _ColumnNamesArray_27.SetAt(1, "TRackBC");
      _ColumnIdsArray_27.SetAt(1, 1);
      _ColumnNamesArray_27.SetAt(2, "TLabwareId");
      _ColumnIdsArray_27.SetAt(2, 2);
      _ColumnNamesArray_27.SetAt(3, "TPositionId");
      _ColumnIdsArray_27.SetAt(3, 3);
      _ColumnNamesArray_27.SetAt(4, "TPositionBC");
      _ColumnIdsArray_27.SetAt(4, 4);
      _ColumnNamesArray_27.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_27.SetAt(5, 5);
      _ColumnNamesArray_27.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_27.SetAt(6, 6);
      _ColumnNamesArray_27.SetAt(7, "TVolume");
      _ColumnIdsArray_27.SetAt(7, 7);
      _ColumnNamesArray_27.SetAt(8, "SRackBC");
      _ColumnIdsArray_27.SetAt(8, 8);
      _ColumnNamesArray_27.SetAt(9, "SLabwareId");
      _ColumnIdsArray_27.SetAt(9, 9);
      _ColumnNamesArray_27.SetAt(10, "SPositionId");
      _ColumnIdsArray_27.SetAt(10, 10);
      _ColumnNamesArray_27.SetAt(11, "SPositionBC");
      _ColumnIdsArray_27.SetAt(11, 11);
      _ColumnNamesArray_27.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_27.SetAt(12, 12);
      _ColumnNamesArray_27.SetAt(13, "UserName");
      _ColumnIdsArray_27.SetAt(13, 13);
      _ExperimentsArray_27.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_27, 0, _ColumnIdsArray_27, _ColumnNamesArray_27, _ExperimentsArray_27, "PlateLiquidToPlate.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_TransferSamples_SingleDispenseFromPlateToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_TipCounterRead( device & ML_STAR, variable var_Tip50_required, variable var_Tip300_required, variable var_TipRocket_required, variable var_Tip1000_required, variable var_Tip5ml_required, variable var_TipTypeToBeProcessed, variable bln_AlwaysEditTipcounter, variable bln_ShowGUITipAndTimeCalculation ) void {
    private dialog customDialog_28;
    private variable CurrentPosition_300;
    private variable Quantity_1000;
    private variable blnReloadAllTipTypes;
    private variable CurrentPosition_50;
    private variable Quantity_50;
    private variable bln_ProcessTip300;
    private variable Text_Insufficient50s;
    private variable EndPosition_300;
    private variable Quantity_300;
    private variable bln_scheduleTipReloadDuringProcess;
    private variable CurrentPosition_1000;
    private variable retValueDialog;
    private variable Text_Insufficient1000s;
    private variable bln_ProcessTip1000;
    private variable Text_Insufficient300s;
    private variable bln_ProcessTip50;
    private variable EndPosition_1000;
    private variable EndPosition_50;
    private variable bln_ProcessTip5ml;
    private variable CurrentPosition_5ml;
    private variable Text_Insufficient5ml;
    private variable Quantity_5ml;
    private variable EndPosition_5ml;
    private variable Text_InsufficientRockets;
    private variable bln_ProcessTipRocket;
    private variable _intMaxSeqTipsRocketAfterEdit;
    private variable EndPosition_Rocket;
    private variable Quantity_Rocket;
    private variable CurrentPosition_Rocket;
    private dialog customDialog_29;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_TipCounterReadV2<<<<<<<<<<"));
    Trace ("---Number of 50uL tips required: ", var_Tip50_required);
    Trace ("---Number of 300uL tips required: ", var_Tip300_required);
    Trace ("---Number of 300uL Rocket tips required: ", var_TipRocket_required);
    Trace ("---Number of 5mL tips required: ", var_Tip5ml_required);
    Trace ("---Number of 1000uL tips required: ", var_Tip1000_required);
    bln_ProcessTip50 = ASWGLOBAL::BOOL::FALSE;
    bln_ProcessTip300 = ASWGLOBAL::BOOL::FALSE;
    bln_ProcessTipRocket = ASWGLOBAL::BOOL::FALSE;
    bln_ProcessTip5ml = ASWGLOBAL::BOOL::FALSE;
    bln_ProcessTip1000 = ASWGLOBAL::BOOL::FALSE;
    bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::FALSE;
    if (var_TipTypeToBeProcessed == 6)
    {
      bln_ProcessTip50 = ASWGLOBAL::BOOL::TRUE;
      bln_ProcessTip300 = ASWGLOBAL::BOOL::TRUE;
      bln_ProcessTipRocket = ASWGLOBAL::BOOL::TRUE;
      bln_ProcessTip5ml = ASWGLOBAL::BOOL::TRUE;
      bln_ProcessTip1000 = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      if (var_TipTypeToBeProcessed == 1)
      {
        bln_ProcessTip50 = ASWGLOBAL::BOOL::TRUE;
      }
      if (var_TipTypeToBeProcessed == 2)
      {
        bln_ProcessTip300 = ASWGLOBAL::BOOL::TRUE;
      }
      if (var_TipTypeToBeProcessed == 3)
      {
        bln_ProcessTipRocket = ASWGLOBAL::BOOL::TRUE;
      }
      if (var_TipTypeToBeProcessed == 4)
      {
        bln_ProcessTip5ml = ASWGLOBAL::BOOL::TRUE;
      }
      if (var_TipTypeToBeProcessed == 5)
      {
        bln_ProcessTip1000 = ASWGLOBAL::BOOL::TRUE;
      }
    }
    Text_Insufficient50s = Translate(" No reload of this tip type necessary");
    Text_Insufficient300s = Translate(" No reload of this tip type necessary");
    Text_Insufficient5ml = Translate(" No reload of this tip type necessary");
    Text_Insufficient5ml = Translate(" No reload of this tip type necessary");
    Text_Insufficient1000s = Translate(" No reload of this tip type necessary");
    if (bln_ProcessTip50 == ASWGLOBAL::BOOL::TRUE)
    {
      if (bln_AlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(seq_Tips50, strTipCounterNameTip50, ML_STAR, 999);
        _intMaxSeqTips50AfterEdit = seq_Tips50.GetCount();
      }
      else
      {
        TipCount::Read2(seq_Tips50, strTipCounterNameTip50, ML_STAR);
      }
      CurrentPosition_50 = seq_Tips50.GetCurrentPosition();
      EndPosition_50 = seq_Tips50.GetCount();
      Quantity_50 = EndPosition_50 - CurrentPosition_50;
      Quantity_50 = Quantity_50 + 1;
      _intConsumedTips50 = _intMaxSeqTips50AfterEdit - Quantity_50;
      TrcTrace12(Translate("CurrentPosition_50 : "), CurrentPosition_50, Translate(" - EndPosition_50 : "), EndPosition_50, Translate(" - Quantity_50 : "), Quantity_50, Translate(" - _intMaxSeqTips50AfterEdit : "), _intMaxSeqTips50AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips50 : "), _intConsumedTips50);
      if (Quantity_50 < var_Tip50_required)
      {
        InsuffientTips = 1;
        if (var_Tip50_required > 96)
        {
          Text_Insufficient50s = Translate("\nPlease load 50ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          Text_Insufficient50s = Translate("\nPlease load more 50ul tips.  You will need at least this many:  ");
          Text_Insufficient50s = StrConcat2(Text_Insufficient50s, var_Tip50_required);
        }
      }
      else
      {
        Text_Insufficient50s = Translate(" No reload of this tip type necessary");
      }
    }
    if (bln_ProcessTip300 == ASWGLOBAL::BOOL::TRUE)
    {
      if (bln_AlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(seq_Tips300, strTipCounterNameTip300, ML_STAR, 999);
        _intMaxSeqTips300AfterEdit = seq_Tips300.GetCount();
      }
      else
      {
        TipCount::Read2(seq_Tips300, strTipCounterNameTip300, ML_STAR);
      }
      CurrentPosition_300 = seq_Tips300.GetCurrentPosition();
      EndPosition_300 = seq_Tips300.GetCount();
      Quantity_300 = EndPosition_300 - CurrentPosition_300;
      Quantity_300 = Quantity_300 + 1;
      _intConsumedTips300 = _intMaxSeqTips300AfterEdit - Quantity_300;
      TrcTrace12(Translate("CurrentPosition_300 : "), CurrentPosition_300, Translate(" - EndPosition_300 : "), EndPosition_300, Translate(" - Quantity_300 : "), Quantity_300, Translate(" - _intMaxSeqTips300AfterEdit : "), _intMaxSeqTips300AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips300 : "), _intConsumedTips300);
      if (Quantity_300 < var_Tip300_required)
      {
        InsuffientTips = 1;
        if (var_Tip300_required > 384)
        {
          Text_Insufficient300s = Translate("\nPlease load 300ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          Text_Insufficient300s = Translate("\nPlease load more 300ul tips.  You will need at least this many:  ");
          Text_Insufficient300s = StrConcat2(Text_Insufficient300s, var_Tip300_required);
        }
      }
      else
      {
        Text_Insufficient300s = Translate(" No reload of this tip type necessary");
      }
    }
    if (bln_ProcessTipRocket == ASWGLOBAL::BOOL::TRUE)
    {
      if (bln_AlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(seq_TipsRocket, strTipCounterNameTipRocket, ML_STAR, 999);
        _intMaxSeqTipsRocketAfterEdit = seq_TipsRocket.GetCount();
      }
      else
      {
        TipCount::Read2(seq_TipsRocket, strTipCounterNameTipRocket, ML_STAR);
      }
      CurrentPosition_Rocket = seq_TipsRocket.GetCurrentPosition();
      EndPosition_Rocket = seq_TipsRocket.GetCount();
      Quantity_Rocket = EndPosition_Rocket - CurrentPosition_Rocket;
      Quantity_Rocket = Quantity_Rocket + 1;
      _intConsumedTipsRocket = _intMaxSeqTipsRocketAfterEdit - Quantity_Rocket;
      TrcTrace12(Translate("CurrentPosition_Rocket : "), CurrentPosition_Rocket, Translate(" - EndPosition_Rocket : "), EndPosition_Rocket, Translate(" - Quantity_Rocket : "), Quantity_Rocket, Translate(" - _intMaxSeqTipsRocketAfterEdit : "), _intMaxSeqTipsRocketAfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTipsRocket : "), _intConsumedTipsRocket);
      if (Quantity_Rocket < var_TipRocket_required)
      {
        InsuffientTips = 1;
        if (var_TipRocket_required > 384)
        {
          Text_InsufficientRockets = Translate("\nPlease load 4 x racks of 300ul Rocket tips.  You will need to come back later to replenish.");
        }
        else
        {
          Text_InsufficientRockets = Translate("\nPlease load more 300ul Rocket tips.  You will need at least this many:  ");
          Text_InsufficientRockets = StrConcat2(Text_InsufficientRockets, var_TipRocket_required);
        }
      }
      else
      {
        Text_InsufficientRockets = Translate(" No reload of this tip type necessary");
      }
    }
    if (bln_ProcessTip5ml == ASWGLOBAL::BOOL::TRUE)
    {
      if (bln_AlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(seq_Tips5ml, strTipCounterNameTip5ml, ML_STAR, 999);
        _intMaxSeqTips5mlAfterEdit = seq_Tips5ml.GetCount();
      }
      else
      {
        TipCount::Read2(seq_Tips5ml, strTipCounterNameTip5ml, ML_STAR);
      }
      CurrentPosition_5ml = seq_Tips5ml.GetCurrentPosition();
      EndPosition_5ml = seq_Tips5ml.GetCount();
      Quantity_5ml = EndPosition_5ml - CurrentPosition_5ml;
      Quantity_5ml = Quantity_5ml + 1;
      _intConsumedTips5ml = _intMaxSeqTips5mlAfterEdit - Quantity_5ml;
      TrcTrace12(Translate("CurrentPosition_5ml : "), CurrentPosition_5ml, Translate(" - EndPosition_5ml : "), EndPosition_5ml, Translate(" - Quantity_5ml : "), Quantity_5ml, Translate(" - _intMaxSeqTips5mlAfterEdit : "), _intMaxSeqTips5mlAfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips5ml : "), _intConsumedTips5ml);
      if (Quantity_5ml < var_Tip5ml_required)
      {
        InsuffientTips = 1;
        if (var_Tip5ml_required > 480)
        {
          Text_Insufficient5ml = Translate("\nPlease load one full carrier of 300ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          Text_Insufficient5ml = Translate("\nPlease load more 5ml tips. You will need at least this many:  ");
          Text_Insufficient5ml = StrConcat2(Text_Insufficient5ml, var_Tip5ml_required);
        }
      }
      else
      {
        Text_Insufficient5ml = Translate(" No reload of this tip type necessary");
      }
    }
    if (bln_ProcessTip1000 == ASWGLOBAL::BOOL::TRUE)
    {
      if (bln_AlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(seq_Tips1000, strTipCounterNameTip1000, ML_STAR, 999);
        _intMaxSeqTips1000AfterEdit = seq_Tips1000.GetCount();
      }
      else
      {
        TipCount::Read2(seq_Tips1000, strTipCounterNameTip1000, ML_STAR);
      }
      CurrentPosition_1000 = seq_Tips1000.GetCurrentPosition();
      EndPosition_1000 = seq_Tips1000.GetCount();
      Quantity_1000 = EndPosition_1000 - CurrentPosition_1000;
      Quantity_1000 = Quantity_1000 + 1;
      _intConsumedTips1000 = _intMaxSeqTips1000AfterEdit - Quantity_1000;
      if (_intConsumedTips1000 < 0)
      {
        _intConsumedTips1000 = 0;
      }
      TrcTrace12(Translate("CurrentPosition_1000 : "), CurrentPosition_1000, Translate(" - EndPosition_1000 : "), EndPosition_1000, Translate(" - Quantity_1000 : "), Quantity_1000, Translate(" - _intMaxSeqTips1000AfterEdit : "), _intMaxSeqTips1000AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips1000 : "), _intConsumedTips1000);
      if(0){
        if (bln_AlwaysEditTipcounter == ASWGLOBAL::BOOL::FALSE)
        {
          _intConsumedTips1000 = _intMaxSeqTips1000AfterEdit - Quantity_1000;
          TrcTrace8(Translate("_intConsumedTips1000 : "), _intConsumedTips1000, Translate(" - intMaxSeqTips1000AfterEdit : "), _intMaxSeqTips1000AfterEdit, Translate(" - Quantity_1000 : "), Quantity_1000, Translate(""), Translate(""));
        }
      }
      if (Quantity_1000 < var_Tip1000_required)
      {
        InsuffientTips = 1;
        if (var_Tip1000_required > 120)
        {
          Text_Insufficient1000s = Translate("\nPlease load two full racks of 1000ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          Text_Insufficient1000s = Translate("\nPlease load more 1000ul tips.  You will need at least this many:  ");
          Text_Insufficient1000s = StrConcat2(Text_Insufficient1000s, var_Tip1000_required);
        }
      }
      else
      {
        Text_Insufficient1000s = Translate(" No reload of this tip type necessary");
      }
    }
    if (InsuffientTips == 1)
    {
      if (bln_ProcessTip50 == ASWGLOBAL::BOOL::TRUE)
      {
        if (var_Tip50_required > 96)
        {
          bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (bln_ProcessTip300 == ASWGLOBAL::BOOL::TRUE)
      {
        if (var_Tip300_required > 480)
        {
          bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (bln_ProcessTipRocket == ASWGLOBAL::BOOL::TRUE)
      {
        if (var_TipRocket_required > 384)
        {
          bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (bln_ProcessTip5ml == ASWGLOBAL::BOOL::TRUE)
      {
        if (var_Tip5ml_required > 480)
        {
          bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (bln_ProcessTip1000 == ASWGLOBAL::BOOL::TRUE)
      {
        if (var_Tip1000_required > 192)
        {
          bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (bln_scheduleTipReloadDuringProcess == ASWGLOBAL::BOOL::TRUE)
      {
        customDialog_28.InitCustomDialog("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");
        customDialog_28.SetCustomDialogProperty( "textBlock1.Text", Text_Insufficient50s );
        customDialog_28.SetCustomDialogProperty( "textBlock2.Text", Text_Insufficient300s );
        customDialog_28.SetCustomDialogProperty( "textBlock3.Text", Text_Insufficient1000s );
        customDialog_28.SetCustomDialogProperty( "textBlock6.Text", Text_Insufficient5ml );
        customDialog_28.SetCustomDialogProperty( "textBlock7.Text", Text_InsufficientRockets );
        customDialog_28.ShowCustomDialog();
        retValueDialog = customDialog_28.GetCustomDialogProperty( "ReturnValue" );
        Text_Insufficient50s = Translate(" No reload of this tip type necessary");
        Text_Insufficient300s = Translate(" No reload of this tip type necessary");
        Text_InsufficientRockets = Translate(" No reload of this tip type necessary");
        Text_Insufficient5ml = Translate(" No reload of this tip type necessary");
        Text_Insufficient1000s = Translate(" No reload of this tip type necessary");
        bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::FALSE;
        InsuffientTips = ASWGLOBAL::BOOL::FALSE;
      }
      else
      {
        blnReloadAllTipTypes = ASWGLOBAL::BOOL::FALSE;
        customDialog_29.InitCustomDialog("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");
        customDialog_29.SetCustomDialogProperty( "textBlock1.Text", Text_Insufficient50s );
        customDialog_29.SetCustomDialogProperty( "textBlock2.Text", Text_Insufficient300s );
        customDialog_29.SetCustomDialogProperty( "textBlock3.Text", Text_Insufficient1000s );
        customDialog_29.SetCustomDialogProperty( "textBlock6.Text", Text_Insufficient5ml );
        customDialog_29.SetCustomDialogProperty( "textBlock7.Text", Text_InsufficientRockets );
        customDialog_29.ShowCustomDialog();
        retValueDialog = customDialog_29.GetCustomDialogProperty( "ReturnValue" );
        blnReloadAllTipTypes = customDialog_29.GetCustomDialogProperty( "checkBox1.IsChecked" );
      }
      if (retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
      if (blnReloadAllTipTypes == ASWGLOBAL::BOOL::TRUE)
      {
        Text_Insufficient50s = Translate(" Preventive reload of this tip type necessary");
        Text_Insufficient300s = Translate(" Preventive reload of this tip type necessary");
        Text_InsufficientRockets = Translate(" Preventive reload of this tip type necessary");
        Text_Insufficient5ml = Translate(" Preventive reload of this tip type necessary");
        Text_Insufficient1000s = Translate(" Preventive reload of this tip type necessary");
      }
      if (Text_Insufficient50s != " No reload of this tip type necessary")
      {
        _intConsumedTips50BeforeRelaodTips = _intConsumedTips50;
        TipCount::Edit2(seq_Tips50, strTipCounterNameTip50, ML_STAR, 999);
        _intMaxSeqTips50AfterEdit = seq_Tips50.GetCount();
      }
      if (Text_Insufficient300s != " No reload of this tip type necessary")
      {
        _intConsumedTips300BeforeRelaodTips = _intConsumedTips300;
        TipCount::Edit2(seq_Tips300, strTipCounterNameTip300, ML_STAR, 999);
        _intMaxSeqTips300AfterEdit = seq_Tips300.GetCount();
      }
      if (Text_InsufficientRockets != " No reload of this tip type necessary")
      {
        _intConsumedTipsRocketBeforeRelaodTips = _intConsumedTipsRocket;
        TipCount::Edit2(seq_TipsRocket, strTipCounterNameTipRocket, ML_STAR, 999);
        _intMaxSeqTipsRocketAfterEdit = seq_TipsRocket.GetCount();
      }
      if (Text_Insufficient5ml != " No reload of this tip type necessary")
      {
        _intConsumedTips5mlBeforeRelaodTips = _intConsumedTips5ml;
        TipCount::Edit2(seq_Tips5ml, strTipCounterNameTip5ml, ML_STAR, 999);
        _intMaxSeqTips5mlAfterEdit = seq_Tips5ml.GetCount();
      }
      if (Text_Insufficient1000s != " No reload of this tip type necessary")
      {
        _intConsumedTips1000BeforeRelaodTips = _intConsumedTips1000;
        TipCount::Edit2(seq_Tips1000, strTipCounterNameTip1000, ML_STAR, 999);
        _intMaxSeqTips1000AfterEdit = seq_Tips1000.GetCount();
      }
      InsuffientTips = ASWGLOBAL::BOOL::FALSE;
    }
    _DATA_TipAndTimeConsumption(bln_ShowGUITipAndTimeCalculation);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_TipCounterRead V2<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_TipAndTimeConsumption( variable bln_ShowDialog ) void {
    private dialog customDialog_30;
    private variable strElapsedTimeOfProccessTimer;
    private variable fltElapsedTimeOfProccessTimer;
    private variable retValueDialog;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: DATA_TipAndTimeConsumption <<<<<<<<<<"));
    Trace ("Consumed 1000ul filter tips before reload of tips :  ", _intConsumedTips1000BeforeRelaodTips);
    Trace ("Consumed 300ul filter tips before reload of tips  :  ", _intConsumedTips300BeforeRelaodTips);
    Trace ("Consumed 300ul Rocket tips before reload of tips  :  ", _intConsumedTipsRocketBeforeRelaodTips);
    Trace ("Consumed 5ml  tips before reload of tips    :  ", _intConsumedTips5mlBeforeRelaodTips);
    Trace ("Consumed 50ul filter tips before reload of tips   :  ", _intConsumedTips50BeforeRelaodTips);
    Trace (" Consumed 1000ul filter tips :  ", _intConsumedTips1000);
    Trace (" Consumed 300ul filter tips  :  ", _intConsumedTips300);
    Trace (" Consumed 300ul Rocket tips  :  ", _intConsumedTipsRocket);
    Trace (" Consumed 5ml  tips    :  ", _intConsumedTips5ml);
    Trace (" Consumed 50ul filter tips   :  ", _intConsumedTips50);
    // Calculate consumed tips
    _intTotalConsumedTips1000  = _intConsumedTips1000 + _intConsumedTips1000BeforeRelaodTips;
    _intTotalConsumedTips300  = _intConsumedTips300 + _intConsumedTips300BeforeRelaodTips;
    _intTotalConsumedTipsRocket  = _intConsumedTipsRocket + _intConsumedTipsRocketBeforeRelaodTips;
    _intTotalConsumedTips5ml  = _intConsumedTips5ml + _intConsumedTips5mlBeforeRelaodTips;
    _intTotalConsumedTips50  = _intConsumedTips50 + _intConsumedTips50BeforeRelaodTips;
    Trace (" --> Total consumed 1000ul filter tips :  ", _intTotalConsumedTips1000);
    Trace (" --> Total consumed 300ul filter tips  :  ", _intTotalConsumedTips300);
    Trace (" --> Total consumed 300ul Rocket tips  :  ", _intTotalConsumedTipsRocket);
    Trace (" --> Total consumed 5ml  tips    :  ", _intTotalConsumedTips5ml);
    Trace (" --> Total consumed 50ul filter tips   :  ", _intTotalConsumedTips50);
    fltElapsedTimeOfProccessTimer = ProccessTimer.GetElapsedTime();
    if (fltElapsedTimeOfProccessTimer > 60)
    {
      fltElapsedTimeOfProccessTimer = fltElapsedTimeOfProccessTimer / (60 * 1.0);
      strElapsedTimeOfProccessTimer = StrFStr(fltElapsedTimeOfProccessTimer);
      strElapsedTimeOfProccessTimer = StrLeft(strElapsedTimeOfProccessTimer, 4);
      strElapsedTimeOfProccessTimer = StrConcat2(strElapsedTimeOfProccessTimer, Translate(" minutes."));
      if (fltElapsedTimeOfProccessTimer > 600)
      {
        fltElapsedTimeOfProccessTimer = fltElapsedTimeOfProccessTimer / (60 * 1.0);
        strElapsedTimeOfProccessTimer = StrFStr(fltElapsedTimeOfProccessTimer);
        strElapsedTimeOfProccessTimer = StrLeft(strElapsedTimeOfProccessTimer, 4);
        strElapsedTimeOfProccessTimer = StrConcat2(strElapsedTimeOfProccessTimer, Translate(" hours."));
      }
    }
    else
    {
      strElapsedTimeOfProccessTimer = StrFStr(fltElapsedTimeOfProccessTimer);
      strElapsedTimeOfProccessTimer = StrLeft(strElapsedTimeOfProccessTimer, 4);
      strElapsedTimeOfProccessTimer = StrConcat2(strElapsedTimeOfProccessTimer, Translate(" seconds."));
    }
    Trace ("Elapsed time in seconds:  ", fltElapsedTimeOfProccessTimer);
    Trace ("Elapsed time formatted:  ", strElapsedTimeOfProccessTimer);
    if (_intTotalConsumedTips50 < 0)
    {
      _intTotalConsumedTips50 = 0;
    }
    if (_intTotalConsumedTips300 < 0)
    {
      _intTotalConsumedTips300 = 0;
    }
    if (_intTotalConsumedTipsRocket < 0)
    {
      _intTotalConsumedTipsRocket = 0;
    }
    if (_intTotalConsumedTips5ml < 0)
    {
      _intTotalConsumedTips5ml = 0;
    }
    if (_intTotalConsumedTips1000 < 0)
    {
      _intTotalConsumedTips1000 = 0;
    }
    if (bln_ShowDialog == ASWGLOBAL::BOOL::TRUE)
    {
      customDialog_30.InitCustomDialog("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");
      customDialog_30.SetCustomDialogProperty( "textBox1.Text", _intTotalConsumedTips1000 );
      customDialog_30.SetCustomDialogProperty( "textBox2.Text", _intTotalConsumedTips300 );
      customDialog_30.SetCustomDialogProperty( "textBox3.Text", _intTotalConsumedTips50 );
      customDialog_30.SetCustomDialogProperty( "textBox4.Text", strElapsedTimeOfProccessTimer );
      customDialog_30.SetCustomDialogProperty( "textBox5.Text", _intTotalConsumedTips5ml );
      customDialog_30.SetCustomDialogProperty( "textBox6.Text", _intTotalConsumedTipsRocket );
      customDialog_30.ShowCustomDialog();
      retValueDialog = customDialog_30.GetCustomDialogProperty( "ReturnValue" );
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_TipAndTimeConsumption <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense ) void {
    private variable intNumberOfPositions;
    private variable strCurrentPosIDTarget;
    private variable intIndexNumberOfPositions;
    private variable strCurrentLabIDSource;
    private variable intGetPositionFromNum;
    private variable strCurrentTime;
    private variable strCurrentDate;
    private variable strCurrentPosIDSource;
    private variable strCurrentLabIDTarget;
    private variable strGetStepData;
    private file NGSStarReportFile2;
    if(0){
      Trace ("StepReturnValue Aspiration to be analyzed :  ", i_strStepReturnValueAspiration);
      Trace ("StepReturnValue Dispense to be analyzed :  ", i_strStepReturnValueDispense);
    }
    strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    if(0){
      Trace ("Update Current Date                :  ", strCurrentDate);
      Trace ("Update Current Time                :  ", strCurrentTime);
    }
    intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueAspiration);
    NGSStarReportFile2.AddField("Date", strCurrentDate, hslString, 255);
    NGSStarReportFile2.AddField("Time", strCurrentTime, hslString, 255);
    NGSStarReportFile2.AddField("LabID Source", strCurrentLabIDSource, hslString, 255);
    NGSStarReportFile2.AddField("PosID Source", strCurrentPosIDSource, hslString, 255);
    NGSStarReportFile2.AddField("Transfer Volume", strGetStepData, hslString, 255);
    NGSStarReportFile2.AddField("LabID Target", strCurrentLabIDTarget, hslString, 255);
    NGSStarReportFile2.AddField("PosID Target", strCurrentPosIDTarget, hslString, 255);
    if( 0 == NGSStarReportFile2.Open(_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFullPathReportFile, "HxMetEdCompCmd");
    }
    {
      for(intIndexNumberOfPositions = 0; intIndexNumberOfPositions < intNumberOfPositions;)
      {
        intIndexNumberOfPositions = intIndexNumberOfPositions + 1;
        intGetPositionFromNum = StepReturn::GetPositionFromNum(intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        strCurrentLabIDSource = StepReturn::GetLabwareId(intGetPositionFromNum, i_strStepReturnValueAspiration);
        strCurrentPosIDSource = StepReturn::GetPositionId(intGetPositionFromNum, i_strStepReturnValueAspiration);
        strGetStepData = StepReturn::GetStepData(intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        if (strGetStepData != "")
        {
          if(0){
            Trace ("Update Current LabID Source        :  ", strCurrentLabIDSource);
            Trace ("Update Current PosID Source        :  ", strCurrentPosIDSource);
          }
        }
        intGetPositionFromNum = StepReturn::GetPositionFromNum(intIndexNumberOfPositions, i_strStepReturnValueDispense);
        strCurrentLabIDTarget = StepReturn::GetLabwareId(intGetPositionFromNum, i_strStepReturnValueDispense);
        strCurrentPosIDTarget = StepReturn::GetPositionId(intGetPositionFromNum, i_strStepReturnValueDispense);
        strGetStepData = StepReturn::GetStepData(intIndexNumberOfPositions, i_strStepReturnValueDispense);
        if (strGetStepData != "")
        {
          if(0){
            Trace ("Update Current Transfer Volume     :  ", strGetStepData);
            Trace ("Update Current LabID Target        :  ", strCurrentLabIDTarget);
            Trace ("Update Current PosID Target        :  ", strCurrentPosIDTarget);
          }
          if( 0 == NGSStarReportFile2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if( 0 != NGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NGSStarReportFile2.RemoveFields();
  }

  function PIP_ElutionBuffer_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMix ) void {
    private variable strCurrentDispenseMode;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable retValueDialog;
    private dialog customDialog_31;
    private dialog customDialog_32;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_ElutionBuffer_384MPHRocketTips <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (intCurrentTipType == 28)
      {
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_31.InitCustomDialog("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");
        customDialog_31.ShowCustomDialog();
        retValueDialog = customDialog_31.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_32.InitCustomDialog("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");
      customDialog_32.ShowCustomDialog();
      retValueDialog = customDialog_32.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_33[];
      variable _ColumnIdsArray_33[];
      variable _ColumnNamesArray_33[];
      variable _ExperimentsArray_33[];
      _FilterIdsArray_33.SetSize(0);
      _ColumnNamesArray_33.SetSize(14);
      _ColumnIdsArray_33.SetSize(14);
      _ColumnNamesArray_33.SetAt(0, "RecordId");
      _ColumnIdsArray_33.SetAt(0, 0);
      _ColumnNamesArray_33.SetAt(1, "TRackBC");
      _ColumnIdsArray_33.SetAt(1, 1);
      _ColumnNamesArray_33.SetAt(2, "TLabwareId");
      _ColumnIdsArray_33.SetAt(2, 2);
      _ColumnNamesArray_33.SetAt(3, "TPositionId");
      _ColumnIdsArray_33.SetAt(3, 3);
      _ColumnNamesArray_33.SetAt(4, "TPositionBC");
      _ColumnIdsArray_33.SetAt(4, 4);
      _ColumnNamesArray_33.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_33.SetAt(5, 5);
      _ColumnNamesArray_33.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_33.SetAt(6, 6);
      _ColumnNamesArray_33.SetAt(7, "TVolume");
      _ColumnIdsArray_33.SetAt(7, 7);
      _ColumnNamesArray_33.SetAt(8, "SRackBC");
      _ColumnIdsArray_33.SetAt(8, 8);
      _ColumnNamesArray_33.SetAt(9, "SLabwareId");
      _ColumnIdsArray_33.SetAt(9, 9);
      _ColumnNamesArray_33.SetAt(10, "SPositionId");
      _ColumnIdsArray_33.SetAt(10, 10);
      _ColumnNamesArray_33.SetAt(11, "SPositionBC");
      _ColumnIdsArray_33.SetAt(11, 11);
      _ColumnNamesArray_33.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_33.SetAt(12, 12);
      _ColumnNamesArray_33.SetAt(13, "UserName");
      _ColumnIdsArray_33.SetAt(13, 13);
      _ExperimentsArray_33.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_33, 0, _ColumnIdsArray_33, _ColumnNamesArray_33, _ExperimentsArray_33, "SupernatantToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_ElutionBufferl_384MPHRocketTips <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_SupernatantRemoval_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void {
    private dialog customDialog_34;
    private dialog customDialog_35;
    private variable strCurrentDispenseMode;
    private variable flt_VolumeAsp1;
    private variable flt_VolumeAsp2;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable fltVolumeDelta;
    private variable retValueDialog;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_SupernatantRemoval_384MPHRocketTips <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
    fltVolumeDelta = 300 - i_fltVolume;
    if (fltVolumeDelta < 20)
    {
      flt_VolumeAsp1 = 280;
      flt_VolumeAsp2 = 20;
    }
    else
    {
      flt_VolumeAsp1 = i_fltVolume;
      flt_VolumeAsp2 = 20;
    }
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (intCurrentTipType == 28)
      {
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_35.InitCustomDialog("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");
        customDialog_35.ShowCustomDialog();
        retValueDialog = customDialog_35.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_34.InitCustomDialog("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");
      customDialog_34.ShowCustomDialog();
      retValueDialog = customDialog_34.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_33[];
      variable _ColumnIdsArray_33[];
      variable _ColumnNamesArray_33[];
      variable _ExperimentsArray_33[];
      _FilterIdsArray_33.SetSize(0);
      _ColumnNamesArray_33.SetSize(14);
      _ColumnIdsArray_33.SetSize(14);
      _ColumnNamesArray_33.SetAt(0, "RecordId");
      _ColumnIdsArray_33.SetAt(0, 0);
      _ColumnNamesArray_33.SetAt(1, "TRackBC");
      _ColumnIdsArray_33.SetAt(1, 1);
      _ColumnNamesArray_33.SetAt(2, "TLabwareId");
      _ColumnIdsArray_33.SetAt(2, 2);
      _ColumnNamesArray_33.SetAt(3, "TPositionId");
      _ColumnIdsArray_33.SetAt(3, 3);
      _ColumnNamesArray_33.SetAt(4, "TPositionBC");
      _ColumnIdsArray_33.SetAt(4, 4);
      _ColumnNamesArray_33.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_33.SetAt(5, 5);
      _ColumnNamesArray_33.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_33.SetAt(6, 6);
      _ColumnNamesArray_33.SetAt(7, "TVolume");
      _ColumnIdsArray_33.SetAt(7, 7);
      _ColumnNamesArray_33.SetAt(8, "SRackBC");
      _ColumnIdsArray_33.SetAt(8, 8);
      _ColumnNamesArray_33.SetAt(9, "SLabwareId");
      _ColumnIdsArray_33.SetAt(9, 9);
      _ColumnNamesArray_33.SetAt(10, "SPositionId");
      _ColumnIdsArray_33.SetAt(10, 10);
      _ColumnNamesArray_33.SetAt(11, "SPositionBC");
      _ColumnIdsArray_33.SetAt(11, 11);
      _ColumnNamesArray_33.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_33.SetAt(12, 12);
      _ColumnNamesArray_33.SetAt(13, "UserName");
      _ColumnIdsArray_33.SetAt(13, 13);
      _ExperimentsArray_33.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_33, 0, _ColumnIdsArray_33, _ColumnNamesArray_33, _ExperimentsArray_33, "SupernatantToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_SupernatantRemoval_384MPHRocketTips <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_CherryPickFromPlateToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable & i_arrVolume[], variable i_strLiquidClassNameTransfer ) void {
    private dialog customDialog_36;
    private variable strCurrentDispenseMode;
    private variable loopCounter1;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable retValueDialog;
    private variable intArrayIndex;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (intCurrentTipType == 1)
      {
        intArrayIndex = 1;
        {
          loopCounter1 = 0;
          while (
             (seq_AspirationPosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips300, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            intArrayIndex = intArrayIndex + 8;
            if (
               (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips300.SetMax(seq_Tips300.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_36.InitCustomDialog("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");
      customDialog_36.ShowCustomDialog();
      retValueDialog = customDialog_36.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_21[];
      variable _ColumnIdsArray_21[];
      variable _ColumnNamesArray_21[];
      variable _ExperimentsArray_21[];
      _FilterIdsArray_21.SetSize(0);
      _ColumnNamesArray_21.SetSize(14);
      _ColumnIdsArray_21.SetSize(14);
      _ColumnNamesArray_21.SetAt(0, "RecordId");
      _ColumnIdsArray_21.SetAt(0, 0);
      _ColumnNamesArray_21.SetAt(1, "TRackBC");
      _ColumnIdsArray_21.SetAt(1, 1);
      _ColumnNamesArray_21.SetAt(2, "TLabwareId");
      _ColumnIdsArray_21.SetAt(2, 2);
      _ColumnNamesArray_21.SetAt(3, "TPositionId");
      _ColumnIdsArray_21.SetAt(3, 3);
      _ColumnNamesArray_21.SetAt(4, "TPositionBC");
      _ColumnIdsArray_21.SetAt(4, 4);
      _ColumnNamesArray_21.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_21.SetAt(5, 5);
      _ColumnNamesArray_21.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_21.SetAt(6, 6);
      _ColumnNamesArray_21.SetAt(7, "TVolume");
      _ColumnIdsArray_21.SetAt(7, 7);
      _ColumnNamesArray_21.SetAt(8, "SRackBC");
      _ColumnIdsArray_21.SetAt(8, 8);
      _ColumnNamesArray_21.SetAt(9, "SLabwareId");
      _ColumnIdsArray_21.SetAt(9, 9);
      _ColumnNamesArray_21.SetAt(10, "SPositionId");
      _ColumnIdsArray_21.SetAt(10, 10);
      _ColumnNamesArray_21.SetAt(11, "SPositionBC");
      _ColumnIdsArray_21.SetAt(11, 11);
      _ColumnNamesArray_21.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_21.SetAt(12, 12);
      _ColumnNamesArray_21.SetAt(13, "UserName");
      _ColumnIdsArray_21.SetAt(13, 13);
      _ExperimentsArray_21.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_21, 0, _ColumnIdsArray_21, _ColumnNamesArray_21, _ExperimentsArray_21, "PlateLiquidToPlate.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_ReagentsFromTubeOrTroughToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable & i_arrVolumes[], variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, variable i_intMixCycles, variable i_fltVolumeMix, variable i_fltDispenseHeightFromBottom, variable i_blnUseUpToFourVials, variable i_blnLiquidFollowDispense ) void {
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable PositionID_Vial_3;
    private variable NumberSamplesMoreThan48;
    private variable PositionID_Vial_4;
    private variable intNumberOfSamples;
    private variable strLabwareIDAspiration;
    private variable intCurrentDispenseMode;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable LabwareID_Vial;
    private variable intCurrentTipType;
    private variable NumberSamplesUpTo48;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable intArrayIndex;
    private variable fltVolume;
    private variable intArraySize;
    private variable loopCounter3;
    private variable fltVolumeMax;
    private variable intCLLDon;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_ReagentsFromTubeOrTroughToPlate <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    if (i_fltVolume == 0)
    {
      intArraySize=i_arrVolumes.GetSize();
      fltVolume=i_arrVolumes.GetAt(1-1);
      fltVolumeMax = fltVolume;
      {
        for(loopCounter3 = 0; loopCounter3 < intArraySize;)
        {
          loopCounter3 = loopCounter3 + 1;
          fltVolume=i_arrVolumes.GetAt(loopCounter3-1);
          if (fltVolume > fltVolumeMax)
          {
            fltVolumeMax = fltVolume;
          }
        }
      }
      _DATA_PlausibilityCheckVolume(fltVolumeMax, intCurrentTipType);
    }
    else
    {
      _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
    }
    strLabwareIDAspiration = SeqGetLabwareId(seq_AspirationPosition);
    _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
    intNumberOfSamples = seq_DispensePosition.GetCount();
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (i_fltDispenseHeightFromBottom == 0)
    {
      intCLLDon = 1;
    }
    else
    {
      intCLLDon = 0;
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (strTypeOfLabware == "tube")
      {
        if (i_blnUseUpToFourVials == ASWGLOBAL::BOOL::TRUE)
        {
          if (intNumberOfSamples > 48)
          {
            NumberSamplesMoreThan48 = intNumberOfSamples - 48;
            NumberSamplesUpTo48 = intNumberOfSamples - (2 * NumberSamplesMoreThan48);
          }
          else
          {
            NumberSamplesMoreThan48 = 0;
            NumberSamplesUpTo48 = intNumberOfSamples;
          }
          LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
          PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
          SeqIncrement(seq_AspirationPosition, 1);
          PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
          SeqIncrement(seq_AspirationPosition, 1);
          PositionID_Vial_3 = SeqGetPositionId(seq_AspirationPosition);
          SeqIncrement(seq_AspirationPosition, 1);
          PositionID_Vial_4 = SeqGetPositionId(seq_AspirationPosition);
          SeqRemoveAll(seq_AspirationPosition);
          {
            for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
            {
              loopCounter2 = loopCounter2 + 1;
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_3);
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_4);
            }
          }
          {
            for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
            {
              loopCounter2 = loopCounter2 + 1;
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
            }
          }
          seq_AspirationPosition.SetCurrentPosition(1);
        }
        else
        {
          if (intNumberOfSamples > 48)
          {
            NumberSamplesMoreThan48 = intNumberOfSamples - 48;
            NumberSamplesUpTo48 = intNumberOfSamples - (2 * NumberSamplesMoreThan48);
          }
          else
          {
            NumberSamplesMoreThan48 = 0;
            NumberSamplesUpTo48 = intNumberOfSamples;
          }
          LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
          PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
          SeqIncrement(seq_AspirationPosition, 1);
          PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
          SeqRemoveAll(seq_AspirationPosition);
          {
            for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
            {
              loopCounter2 = loopCounter2 + 1;
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
            }
          }
          {
            for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
            {
              loopCounter2 = loopCounter2 + 1;
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
            }
          }
          seq_AspirationPosition.SetCurrentPosition(1);
        }
      }
      if (strTypeOfLabware == "trough")
      {
      }
      if (i_fltVolume > 0)
      {
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        if (intCurrentTipType == 1)
        {
          {
            loopCounter1 = 0;
            while (
               (seq_DispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips300, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
            seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
            seq_Tips300.SetMax(seq_Tips300.GetTotal());
            seq_AspirationPosition.SetCurrentPosition(1);
            seq_DispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 5)
        {
          {
            loopCounter1 = 0;
            while (
               (seq_DispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips1000, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
            seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
            seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
            seq_AspirationPosition.SetCurrentPosition(1);
            seq_DispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 23)
        {
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          {
            loopCounter1 = 0;
            while (
               (seq_DispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips50, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
            seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            seq_AspirationPosition.SetCurrentPosition(1);
            seq_DispensePosition.SetCurrentPosition(1);
          }
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (intCurrentTipType == 23)
        {
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
      }
      else
      {
        intArrayIndex = 1;
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        if (intCurrentTipType == 1)
        {
          {
            loopCounter1 = 0;
            while (
               (seq_DispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips300, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              if (loopCounter1 == 1)
              {
                if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    	strStepReturnValueAspiration = arrRetValues[2];
                  }
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              intArrayIndex = intArrayIndex + 8;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
            seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
            seq_Tips300.SetMax(seq_Tips300.GetTotal());
            seq_AspirationPosition.SetCurrentPosition(1);
            seq_DispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 5)
        {
          {
            loopCounter1 = 0;
            while (
               (seq_DispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips1000, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
            seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
            seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
            seq_AspirationPosition.SetCurrentPosition(1);
            seq_DispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 23)
        {
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          {
            loopCounter1 = 0;
            while (
               (seq_DispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips50, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              intArrayIndex = intArrayIndex + 8;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
            seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            seq_AspirationPosition.SetCurrentPosition(1);
            seq_DispensePosition.SetCurrentPosition(1);
          }
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (intCurrentTipType == 23)
        {
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
      }
    }
    if (strCurrentDispenseMode == "Part")
    {
      if (intCurrentTipType == 1)
      {
        _PIP_SVFTMultidispenseFromTroughToPlate(ML_STAR, seq_AspirationPosition, seq_DispensePosition, i_fltVolume, i_strLiquidClassNameTransfer, i_fltDispenseHeightFromBottom);
      }
      else
      {
        _PIP_HVFTMultidispenseFromTroughToPlate(ML_STAR, seq_AspirationPosition, seq_DispensePosition, i_fltVolume, i_strLiquidClassNameTransfer);
      }
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_37[];
      variable _ColumnIdsArray_37[];
      variable _ColumnNamesArray_37[];
      variable _ExperimentsArray_37[];
      _FilterIdsArray_37.SetSize(0);
      _ColumnNamesArray_37.SetSize(14);
      _ColumnIdsArray_37.SetSize(14);
      _ColumnNamesArray_37.SetAt(0, "RecordId");
      _ColumnIdsArray_37.SetAt(0, 0);
      _ColumnNamesArray_37.SetAt(1, "TRackBC");
      _ColumnIdsArray_37.SetAt(1, 1);
      _ColumnNamesArray_37.SetAt(2, "TLabwareId");
      _ColumnIdsArray_37.SetAt(2, 2);
      _ColumnNamesArray_37.SetAt(3, "TPositionId");
      _ColumnIdsArray_37.SetAt(3, 3);
      _ColumnNamesArray_37.SetAt(4, "TPositionBC");
      _ColumnIdsArray_37.SetAt(4, 4);
      _ColumnNamesArray_37.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_37.SetAt(5, 5);
      _ColumnNamesArray_37.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_37.SetAt(6, 6);
      _ColumnNamesArray_37.SetAt(7, "TVolume");
      _ColumnIdsArray_37.SetAt(7, 7);
      _ColumnNamesArray_37.SetAt(8, "SRackBC");
      _ColumnIdsArray_37.SetAt(8, 8);
      _ColumnNamesArray_37.SetAt(9, "SLabwareId");
      _ColumnIdsArray_37.SetAt(9, 9);
      _ColumnNamesArray_37.SetAt(10, "SPositionId");
      _ColumnIdsArray_37.SetAt(10, 10);
      _ColumnNamesArray_37.SetAt(11, "SPositionBC");
      _ColumnIdsArray_37.SetAt(11, 11);
      _ColumnNamesArray_37.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_37.SetAt(12, 12);
      _ColumnNamesArray_37.SetAt(13, "UserName");
      _ColumnIdsArray_37.SetAt(13, 13);
      _ExperimentsArray_37.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_37, 0, _ColumnIdsArray_37, _ColumnNamesArray_37, _ExperimentsArray_37, "Reagents_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_ReagentsFromTubeOrTroughToPlate<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_Eluate_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void {
    private dialog customDialog_38;
    private variable strCurrentDispenseMode;
    private variable intCurrentDispenseMode;
    private variable loopCounter1;
    private variable intCurrentTipType;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable retValueDialog;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (intCurrentTipType == 1)
      {
        {
          loopCounter1 = 0;
          while (
             (seq_AspirationPosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips300, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips300.SetMax(seq_Tips300.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
      }
      if (intCurrentTipType == 5)
      {
        {
          loopCounter1 = 0;
          while (
             (seq_AspirationPosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips1000, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
      }
      if (intCurrentTipType == 23)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        {
          loopCounter1 = 0;
          while (
             (seq_AspirationPosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips50, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips50.SetMax(seq_Tips50.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_38.InitCustomDialog("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");
      customDialog_38.ShowCustomDialog();
      retValueDialog = customDialog_38.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_27[];
      variable _ColumnIdsArray_27[];
      variable _ColumnNamesArray_27[];
      variable _ExperimentsArray_27[];
      _FilterIdsArray_27.SetSize(0);
      _ColumnNamesArray_27.SetSize(14);
      _ColumnIdsArray_27.SetSize(14);
      _ColumnNamesArray_27.SetAt(0, "RecordId");
      _ColumnIdsArray_27.SetAt(0, 0);
      _ColumnNamesArray_27.SetAt(1, "TRackBC");
      _ColumnIdsArray_27.SetAt(1, 1);
      _ColumnNamesArray_27.SetAt(2, "TLabwareId");
      _ColumnIdsArray_27.SetAt(2, 2);
      _ColumnNamesArray_27.SetAt(3, "TPositionId");
      _ColumnIdsArray_27.SetAt(3, 3);
      _ColumnNamesArray_27.SetAt(4, "TPositionBC");
      _ColumnIdsArray_27.SetAt(4, 4);
      _ColumnNamesArray_27.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_27.SetAt(5, 5);
      _ColumnNamesArray_27.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_27.SetAt(6, 6);
      _ColumnNamesArray_27.SetAt(7, "TVolume");
      _ColumnIdsArray_27.SetAt(7, 7);
      _ColumnNamesArray_27.SetAt(8, "SRackBC");
      _ColumnIdsArray_27.SetAt(8, 8);
      _ColumnNamesArray_27.SetAt(9, "SLabwareId");
      _ColumnIdsArray_27.SetAt(9, 9);
      _ColumnNamesArray_27.SetAt(10, "SPositionId");
      _ColumnIdsArray_27.SetAt(10, 10);
      _ColumnNamesArray_27.SetAt(11, "SPositionBC");
      _ColumnIdsArray_27.SetAt(11, 11);
      _ColumnNamesArray_27.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_27.SetAt(12, 12);
      _ColumnNamesArray_27.SetAt(13, "UserName");
      _ColumnIdsArray_27.SetAt(13, 13);
      _ExperimentsArray_27.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_27, 0, _ColumnIdsArray_27, _ColumnNamesArray_27, _ExperimentsArray_27, "PlateLiquidToPlate.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_SPRIBeadSupernatantRemoval_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void {
    private dialog customDialog_39;
    private dialog customDialog_40;
    private variable strCurrentDispenseMode;
    private variable flt_VolumeAsp1;
    private variable flt_VolumeAsp2;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable fltVolumeDelta;
    private variable retValueDialog;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_SVL_SPRIBeadSupernatantRemoval_384MPHRocketTips <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
    fltVolumeDelta = 300 - i_fltVolume;
    if (fltVolumeDelta < 20)
    {
      flt_VolumeAsp1 = 280;
      flt_VolumeAsp2 = 20;
    }
    else
    {
      flt_VolumeAsp1 = i_fltVolume;
      flt_VolumeAsp2 = 20;
    }
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (intCurrentTipType == 28)
      {
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        if(0){
          {
            	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
          }
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_39.InitCustomDialog("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");
        customDialog_39.ShowCustomDialog();
        retValueDialog = customDialog_39.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_40.InitCustomDialog("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");
      customDialog_40.ShowCustomDialog();
      retValueDialog = customDialog_40.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_33[];
      variable _ColumnIdsArray_33[];
      variable _ColumnNamesArray_33[];
      variable _ExperimentsArray_33[];
      _FilterIdsArray_33.SetSize(0);
      _ColumnNamesArray_33.SetSize(14);
      _ColumnIdsArray_33.SetSize(14);
      _ColumnNamesArray_33.SetAt(0, "RecordId");
      _ColumnIdsArray_33.SetAt(0, 0);
      _ColumnNamesArray_33.SetAt(1, "TRackBC");
      _ColumnIdsArray_33.SetAt(1, 1);
      _ColumnNamesArray_33.SetAt(2, "TLabwareId");
      _ColumnIdsArray_33.SetAt(2, 2);
      _ColumnNamesArray_33.SetAt(3, "TPositionId");
      _ColumnIdsArray_33.SetAt(3, 3);
      _ColumnNamesArray_33.SetAt(4, "TPositionBC");
      _ColumnIdsArray_33.SetAt(4, 4);
      _ColumnNamesArray_33.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_33.SetAt(5, 5);
      _ColumnNamesArray_33.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_33.SetAt(6, 6);
      _ColumnNamesArray_33.SetAt(7, "TVolume");
      _ColumnIdsArray_33.SetAt(7, 7);
      _ColumnNamesArray_33.SetAt(8, "SRackBC");
      _ColumnIdsArray_33.SetAt(8, 8);
      _ColumnNamesArray_33.SetAt(9, "SLabwareId");
      _ColumnIdsArray_33.SetAt(9, 9);
      _ColumnNamesArray_33.SetAt(10, "SPositionId");
      _ColumnIdsArray_33.SetAt(10, 10);
      _ColumnNamesArray_33.SetAt(11, "SPositionBC");
      _ColumnIdsArray_33.SetAt(11, 11);
      _ColumnNamesArray_33.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_33.SetAt(12, 12);
      _ColumnNamesArray_33.SetAt(13, "UserName");
      _ColumnIdsArray_33.SetAt(13, 13);
      _ExperimentsArray_33.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_33, 0, _ColumnIdsArray_33, _ColumnNamesArray_33, _ExperimentsArray_33, "SupernatantToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_SupernatantRemoval_384MPHRocketTips <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_BeadsFromTroughToPlateAndTransfer( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TransferPosition, variable i_fltVolBeads, variable i_fltVolTransfer, variable i_strLiquidClassNameTransfer, sequence seq_Mixing, variable i_intBeadTroughMixVolume, variable i_mixCycles, variable i_mixVolume ) void {
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable strLabwareIDBeads;
    private variable intGetTotalOFSeqDispense;
    private variable intNumberOfSamples;
    private variable intCurrentDispenseMode;
    private variable loopCounter1;
    private variable intCurrentTipType;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_BeadsFromTroughToPlateAndTransfer <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    _DATA_PlausibilityCheckVolume(i_fltVolBeads, intCurrentTipType);
    strLabwareIDBeads = SeqGetLabwareId(seq_AspirationPosition);
    _DATA_InterpreteLabwareID(strLabwareIDBeads, strTypeOfLabware);
    intNumberOfSamples = seq_DispensePosition.GetCount();
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (strTypeOfLabware == "trough")
      {
        intGetTotalOFSeqDispense = SeqGetTotal(seq_DispensePosition);
        MECC::TraceComment(Translate("********* Premix in trough ***********\nRK: if more than 8 samples are processed, mix with 8 channels. Also different mixing heights\n"));
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        DATA_TipCounterWrite(ML_STAR);
      }
      MECC::TraceComment(Translate("********** Now pipetting beads to destination plate"));
      if (intCurrentTipType == 1)
      {
        {
          loopCounter1 = 0;
          while (
             (seq_DispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips300, 1, seq_TransferPosition, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            if (i_fltVolBeads == 31)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
            }
            else
            {
              if (i_fltVolBeads == 53)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips300.SetMax(seq_Tips300.GetTotal());
          seq_TransferPosition.SetMax(seq_TransferPosition.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
          seq_TransferPosition.SetCurrentPosition(1);
        }
      }
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_17[];
      variable _ColumnIdsArray_17[];
      variable _ColumnNamesArray_17[];
      variable _ExperimentsArray_17[];
      _FilterIdsArray_17.SetSize(0);
      _ColumnNamesArray_17.SetSize(14);
      _ColumnIdsArray_17.SetSize(14);
      _ColumnNamesArray_17.SetAt(0, "RecordId");
      _ColumnIdsArray_17.SetAt(0, 0);
      _ColumnNamesArray_17.SetAt(1, "TRackBC");
      _ColumnIdsArray_17.SetAt(1, 1);
      _ColumnNamesArray_17.SetAt(2, "TLabwareId");
      _ColumnIdsArray_17.SetAt(2, 2);
      _ColumnNamesArray_17.SetAt(3, "TPositionId");
      _ColumnIdsArray_17.SetAt(3, 3);
      _ColumnNamesArray_17.SetAt(4, "TPositionBC");
      _ColumnIdsArray_17.SetAt(4, 4);
      _ColumnNamesArray_17.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_17.SetAt(5, 5);
      _ColumnNamesArray_17.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_17.SetAt(6, 6);
      _ColumnNamesArray_17.SetAt(7, "TVolume");
      _ColumnIdsArray_17.SetAt(7, 7);
      _ColumnNamesArray_17.SetAt(8, "SRackBC");
      _ColumnIdsArray_17.SetAt(8, 8);
      _ColumnNamesArray_17.SetAt(9, "SLabwareId");
      _ColumnIdsArray_17.SetAt(9, 9);
      _ColumnNamesArray_17.SetAt(10, "SPositionId");
      _ColumnIdsArray_17.SetAt(10, 10);
      _ColumnNamesArray_17.SetAt(11, "SPositionBC");
      _ColumnIdsArray_17.SetAt(11, 11);
      _ColumnNamesArray_17.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_17.SetAt(12, 12);
      _ColumnNamesArray_17.SetAt(13, "UserName");
      _ColumnIdsArray_17.SetAt(13, 13);
      _ExperimentsArray_17.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_17, 0, _ColumnIdsArray_17, _ColumnNamesArray_17, _ExperimentsArray_17, "Beads_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_BeadsFromTroughToPlateAndTransfer<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_Ethanol_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void {
    private dialog customDialog_41;
    private dialog customDialog_42;
    private variable strCurrentDispenseMode;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable retValueDialog;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Ethanol_384MPHRocketTips <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (intCurrentTipType == 28)
      {
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_42.InitCustomDialog("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");
        customDialog_42.ShowCustomDialog();
        retValueDialog = customDialog_42.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_41.InitCustomDialog("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");
      customDialog_41.ShowCustomDialog();
      retValueDialog = customDialog_41.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_33[];
      variable _ColumnIdsArray_33[];
      variable _ColumnNamesArray_33[];
      variable _ExperimentsArray_33[];
      _FilterIdsArray_33.SetSize(0);
      _ColumnNamesArray_33.SetSize(14);
      _ColumnIdsArray_33.SetSize(14);
      _ColumnNamesArray_33.SetAt(0, "RecordId");
      _ColumnIdsArray_33.SetAt(0, 0);
      _ColumnNamesArray_33.SetAt(1, "TRackBC");
      _ColumnIdsArray_33.SetAt(1, 1);
      _ColumnNamesArray_33.SetAt(2, "TLabwareId");
      _ColumnIdsArray_33.SetAt(2, 2);
      _ColumnNamesArray_33.SetAt(3, "TPositionId");
      _ColumnIdsArray_33.SetAt(3, 3);
      _ColumnNamesArray_33.SetAt(4, "TPositionBC");
      _ColumnIdsArray_33.SetAt(4, 4);
      _ColumnNamesArray_33.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_33.SetAt(5, 5);
      _ColumnNamesArray_33.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_33.SetAt(6, 6);
      _ColumnNamesArray_33.SetAt(7, "TVolume");
      _ColumnIdsArray_33.SetAt(7, 7);
      _ColumnNamesArray_33.SetAt(8, "SRackBC");
      _ColumnIdsArray_33.SetAt(8, 8);
      _ColumnNamesArray_33.SetAt(9, "SLabwareId");
      _ColumnIdsArray_33.SetAt(9, 9);
      _ColumnNamesArray_33.SetAt(10, "SPositionId");
      _ColumnIdsArray_33.SetAt(10, 10);
      _ColumnNamesArray_33.SetAt(11, "SPositionBC");
      _ColumnIdsArray_33.SetAt(11, 11);
      _ColumnNamesArray_33.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_33.SetAt(12, 12);
      _ColumnNamesArray_33.SetAt(13, "UserName");
      _ColumnIdsArray_33.SetAt(13, 13);
      _ExperimentsArray_33.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_33, 0, _ColumnIdsArray_33, _ColumnNamesArray_33, _ExperimentsArray_33, "SupernatantToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Ethanol_384MPHRocketTips <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_EthanolRemoval_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void {
    private dialog customDialog_43;
    private dialog customDialog_44;
    private variable strCurrentDispenseMode;
    private variable flt_VolumeAsp1;
    private variable flt_VolumeAsp2;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable fltVolumeDelta;
    private variable retValueDialog;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_EthanolRemoval_384MPHRocketTips <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
    fltVolumeDelta = 300 - i_fltVolume;
    if (fltVolumeDelta < 20)
    {
      flt_VolumeAsp1 = 280;
      flt_VolumeAsp2 = 20;
    }
    else
    {
      flt_VolumeAsp1 = i_fltVolume;
      flt_VolumeAsp2 = 20;
    }
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (intCurrentTipType == 28)
      {
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_43.InitCustomDialog("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");
        customDialog_43.ShowCustomDialog();
        retValueDialog = customDialog_43.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_44.InitCustomDialog("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");
      customDialog_44.ShowCustomDialog();
      retValueDialog = customDialog_44.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_33[];
      variable _ColumnIdsArray_33[];
      variable _ColumnNamesArray_33[];
      variable _ExperimentsArray_33[];
      _FilterIdsArray_33.SetSize(0);
      _ColumnNamesArray_33.SetSize(14);
      _ColumnIdsArray_33.SetSize(14);
      _ColumnNamesArray_33.SetAt(0, "RecordId");
      _ColumnIdsArray_33.SetAt(0, 0);
      _ColumnNamesArray_33.SetAt(1, "TRackBC");
      _ColumnIdsArray_33.SetAt(1, 1);
      _ColumnNamesArray_33.SetAt(2, "TLabwareId");
      _ColumnIdsArray_33.SetAt(2, 2);
      _ColumnNamesArray_33.SetAt(3, "TPositionId");
      _ColumnIdsArray_33.SetAt(3, 3);
      _ColumnNamesArray_33.SetAt(4, "TPositionBC");
      _ColumnIdsArray_33.SetAt(4, 4);
      _ColumnNamesArray_33.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_33.SetAt(5, 5);
      _ColumnNamesArray_33.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_33.SetAt(6, 6);
      _ColumnNamesArray_33.SetAt(7, "TVolume");
      _ColumnIdsArray_33.SetAt(7, 7);
      _ColumnNamesArray_33.SetAt(8, "SRackBC");
      _ColumnIdsArray_33.SetAt(8, 8);
      _ColumnNamesArray_33.SetAt(9, "SLabwareId");
      _ColumnIdsArray_33.SetAt(9, 9);
      _ColumnNamesArray_33.SetAt(10, "SPositionId");
      _ColumnIdsArray_33.SetAt(10, 10);
      _ColumnNamesArray_33.SetAt(11, "SPositionBC");
      _ColumnIdsArray_33.SetAt(11, 11);
      _ColumnNamesArray_33.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_33.SetAt(12, 12);
      _ColumnNamesArray_33.SetAt(13, "UserName");
      _ColumnIdsArray_33.SetAt(13, 13);
      _ExperimentsArray_33.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_33, 0, _ColumnIdsArray_33, _ColumnNamesArray_33, _ExperimentsArray_33, "SupernatantToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_EthanolRemoval_384MPHRocketTips <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_CherryPickFromPlateToPlate50ulTip( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable & i_arrVolume[], variable i_strLiquidClassNameTransfer ) void {
    private dialog customDialog_45;
    private variable strCurrentDispenseMode;
    private variable loopCounter1;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable intArrayIndex;
    private variable retValueDialog;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (intCurrentTipType == 22)
      {
        intArrayIndex = 1;
        {
          loopCounter1 = 0;
          while (
             (seq_AspirationPosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips50, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            intArrayIndex = intArrayIndex + 8;
            if (
               (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips50.SetMax(seq_Tips50.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_45.InitCustomDialog("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");
      customDialog_45.ShowCustomDialog();
      retValueDialog = customDialog_45.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_21[];
      variable _ColumnIdsArray_21[];
      variable _ColumnNamesArray_21[];
      variable _ExperimentsArray_21[];
      _FilterIdsArray_21.SetSize(0);
      _ColumnNamesArray_21.SetSize(14);
      _ColumnIdsArray_21.SetSize(14);
      _ColumnNamesArray_21.SetAt(0, "RecordId");
      _ColumnIdsArray_21.SetAt(0, 0);
      _ColumnNamesArray_21.SetAt(1, "TRackBC");
      _ColumnIdsArray_21.SetAt(1, 1);
      _ColumnNamesArray_21.SetAt(2, "TLabwareId");
      _ColumnIdsArray_21.SetAt(2, 2);
      _ColumnNamesArray_21.SetAt(3, "TPositionId");
      _ColumnIdsArray_21.SetAt(3, 3);
      _ColumnNamesArray_21.SetAt(4, "TPositionBC");
      _ColumnIdsArray_21.SetAt(4, 4);
      _ColumnNamesArray_21.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_21.SetAt(5, 5);
      _ColumnNamesArray_21.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_21.SetAt(6, 6);
      _ColumnNamesArray_21.SetAt(7, "TVolume");
      _ColumnIdsArray_21.SetAt(7, 7);
      _ColumnNamesArray_21.SetAt(8, "SRackBC");
      _ColumnIdsArray_21.SetAt(8, 8);
      _ColumnNamesArray_21.SetAt(9, "SLabwareId");
      _ColumnIdsArray_21.SetAt(9, 9);
      _ColumnNamesArray_21.SetAt(10, "SPositionId");
      _ColumnIdsArray_21.SetAt(10, 10);
      _ColumnNamesArray_21.SetAt(11, "SPositionBC");
      _ColumnIdsArray_21.SetAt(11, 11);
      _ColumnNamesArray_21.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_21.SetAt(12, 12);
      _ColumnNamesArray_21.SetAt(13, "UserName");
      _ColumnIdsArray_21.SetAt(13, 13);
      _ExperimentsArray_21.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_21, 0, _ColumnIdsArray_21, _ColumnNamesArray_21, _ExperimentsArray_21, "PlateLiquidToPlate.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_CherryPickFromPlateToPlate50ulfilterTip( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable & i_arrVolume[], variable i_strLiquidClassNameTransfer ) void {
    private dialog customDialog_46;
    private variable strCurrentDispenseMode;
    private variable intCurrentDispenseMode;
    private variable loopCounter1;
    private variable intCurrentTipType;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable intArrayIndex;
    private variable retValueDialog;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (intCurrentTipType == 23)
      {
        intArrayIndex = 1;
        {
          loopCounter1 = 0;
          while (
             (seq_AspirationPosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips50, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            intArrayIndex = intArrayIndex + 8;
            if (
               (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips50.SetMax(seq_Tips50.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_46.InitCustomDialog("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");
      customDialog_46.ShowCustomDialog();
      retValueDialog = customDialog_46.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_21[];
      variable _ColumnIdsArray_21[];
      variable _ColumnNamesArray_21[];
      variable _ExperimentsArray_21[];
      _FilterIdsArray_21.SetSize(0);
      _ColumnNamesArray_21.SetSize(14);
      _ColumnIdsArray_21.SetSize(14);
      _ColumnNamesArray_21.SetAt(0, "RecordId");
      _ColumnIdsArray_21.SetAt(0, 0);
      _ColumnNamesArray_21.SetAt(1, "TRackBC");
      _ColumnIdsArray_21.SetAt(1, 1);
      _ColumnNamesArray_21.SetAt(2, "TLabwareId");
      _ColumnIdsArray_21.SetAt(2, 2);
      _ColumnNamesArray_21.SetAt(3, "TPositionId");
      _ColumnIdsArray_21.SetAt(3, 3);
      _ColumnNamesArray_21.SetAt(4, "TPositionBC");
      _ColumnIdsArray_21.SetAt(4, 4);
      _ColumnNamesArray_21.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_21.SetAt(5, 5);
      _ColumnNamesArray_21.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_21.SetAt(6, 6);
      _ColumnNamesArray_21.SetAt(7, "TVolume");
      _ColumnIdsArray_21.SetAt(7, 7);
      _ColumnNamesArray_21.SetAt(8, "SRackBC");
      _ColumnIdsArray_21.SetAt(8, 8);
      _ColumnNamesArray_21.SetAt(9, "SLabwareId");
      _ColumnIdsArray_21.SetAt(9, 9);
      _ColumnNamesArray_21.SetAt(10, "SPositionId");
      _ColumnIdsArray_21.SetAt(10, 10);
      _ColumnNamesArray_21.SetAt(11, "SPositionBC");
      _ColumnIdsArray_21.SetAt(11, 11);
      _ColumnNamesArray_21.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_21.SetAt(12, 12);
      _ColumnNamesArray_21.SetAt(13, "UserName");
      _ColumnIdsArray_21.SetAt(13, 13);
      _ExperimentsArray_21.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_21, 0, _ColumnIdsArray_21, _ColumnNamesArray_21, _ExperimentsArray_21, "PlateLiquidToPlate.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_BeadsFromTroughtAtSetHeightToPlateAndTransfer( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TransferPosition, variable i_fltVolBeads, variable i_fltVolTransfer, variable i_strLiquidClassNameTransfer, sequence seq_Mixing, variable i_intBeadTroughMixVolume, variable i_mixCycles, variable i_mixVolume, variable i_fltBeadPipettingHeight ) void {
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable strLabwareIDBeads;
    private variable intGetTotalOFSeqDispense;
    private variable intNumberOfSamples;
    private variable loopCounter1;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_BeadsFromTroughAtSetHeightToPlateAndTransfer <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    _DATA_PlausibilityCheckVolume(i_fltVolBeads, intCurrentTipType);
    strLabwareIDBeads = SeqGetLabwareId(seq_AspirationPosition);
    _DATA_InterpreteLabwareID(strLabwareIDBeads, strTypeOfLabware);
    intNumberOfSamples = seq_DispensePosition.GetCount();
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (strTypeOfLabware == "trough")
      {
        intGetTotalOFSeqDispense = SeqGetTotal(seq_DispensePosition);
        MECC::TraceComment(Translate("********* Premix in trough ***********\nRK: if more than 8 samples are processed, mix with 8 channels. Also different mixing heights\n"));
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        DATA_TipCounterWrite(ML_STAR);
      }
      MECC::TraceComment(Translate("********** Now pipetting beads to destination plate"));
      if (intCurrentTipType == 1)
      {
        {
          loopCounter1 = 0;
          while (
             (seq_DispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_Tips300, 1, seq_TransferPosition, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            if (i_fltVolBeads == 31)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
            }
            else
            {
              if (i_fltVolBeads == 53)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            if (
               (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
          seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
          seq_Tips300.SetMax(seq_Tips300.GetTotal());
          seq_TransferPosition.SetMax(seq_TransferPosition.GetTotal());
          seq_AspirationPosition.SetCurrentPosition(1);
          seq_DispensePosition.SetCurrentPosition(1);
          seq_TransferPosition.SetCurrentPosition(1);
        }
      }
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_17[];
      variable _ColumnIdsArray_17[];
      variable _ColumnNamesArray_17[];
      variable _ExperimentsArray_17[];
      _FilterIdsArray_17.SetSize(0);
      _ColumnNamesArray_17.SetSize(14);
      _ColumnIdsArray_17.SetSize(14);
      _ColumnNamesArray_17.SetAt(0, "RecordId");
      _ColumnIdsArray_17.SetAt(0, 0);
      _ColumnNamesArray_17.SetAt(1, "TRackBC");
      _ColumnIdsArray_17.SetAt(1, 1);
      _ColumnNamesArray_17.SetAt(2, "TLabwareId");
      _ColumnIdsArray_17.SetAt(2, 2);
      _ColumnNamesArray_17.SetAt(3, "TPositionId");
      _ColumnIdsArray_17.SetAt(3, 3);
      _ColumnNamesArray_17.SetAt(4, "TPositionBC");
      _ColumnIdsArray_17.SetAt(4, 4);
      _ColumnNamesArray_17.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_17.SetAt(5, 5);
      _ColumnNamesArray_17.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_17.SetAt(6, 6);
      _ColumnNamesArray_17.SetAt(7, "TVolume");
      _ColumnIdsArray_17.SetAt(7, 7);
      _ColumnNamesArray_17.SetAt(8, "SRackBC");
      _ColumnIdsArray_17.SetAt(8, 8);
      _ColumnNamesArray_17.SetAt(9, "SLabwareId");
      _ColumnIdsArray_17.SetAt(9, 9);
      _ColumnNamesArray_17.SetAt(10, "SPositionId");
      _ColumnIdsArray_17.SetAt(10, 10);
      _ColumnNamesArray_17.SetAt(11, "SPositionBC");
      _ColumnIdsArray_17.SetAt(11, 11);
      _ColumnNamesArray_17.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_17.SetAt(12, 12);
      _ColumnNamesArray_17.SetAt(13, "UserName");
      _ColumnIdsArray_17.SetAt(13, 13);
      _ExperimentsArray_17.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_17, 0, _ColumnIdsArray_17, _ColumnNamesArray_17, _ExperimentsArray_17, "Beads_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_BeadsFromTroughToPlateAndTransfer<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_ElutionBuffer_AtSetHeight_384MPHRocketTips( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMix, variable i_fltAspirationHeight ) void {
    private dialog customDialog_47;
    private dialog customDialog_48;
    private variable strCurrentDispenseMode;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_ElutionBuffer_384MPHRocketTips <<<<<<<<<<"));
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
    _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
    if (intCurrentDispenseMode == 2)
    {
      strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (intCurrentDispenseMode == 4)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (strCurrentDispenseMode == "Empty")
    {
      if (intCurrentTipType == 28)
      {
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_47.InitCustomDialog("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");
        customDialog_47.ShowCustomDialog();
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      customDialog_48.InitCustomDialog("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");
      customDialog_48.ShowCustomDialog();
      abort;
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_33[];
      variable _ColumnIdsArray_33[];
      variable _ColumnNamesArray_33[];
      variable _ExperimentsArray_33[];
      _FilterIdsArray_33.SetSize(0);
      _ColumnNamesArray_33.SetSize(14);
      _ColumnIdsArray_33.SetSize(14);
      _ColumnNamesArray_33.SetAt(0, "RecordId");
      _ColumnIdsArray_33.SetAt(0, 0);
      _ColumnNamesArray_33.SetAt(1, "TRackBC");
      _ColumnIdsArray_33.SetAt(1, 1);
      _ColumnNamesArray_33.SetAt(2, "TLabwareId");
      _ColumnIdsArray_33.SetAt(2, 2);
      _ColumnNamesArray_33.SetAt(3, "TPositionId");
      _ColumnIdsArray_33.SetAt(3, 3);
      _ColumnNamesArray_33.SetAt(4, "TPositionBC");
      _ColumnIdsArray_33.SetAt(4, 4);
      _ColumnNamesArray_33.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_33.SetAt(5, 5);
      _ColumnNamesArray_33.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_33.SetAt(6, 6);
      _ColumnNamesArray_33.SetAt(7, "TVolume");
      _ColumnIdsArray_33.SetAt(7, 7);
      _ColumnNamesArray_33.SetAt(8, "SRackBC");
      _ColumnIdsArray_33.SetAt(8, 8);
      _ColumnNamesArray_33.SetAt(9, "SLabwareId");
      _ColumnIdsArray_33.SetAt(9, 9);
      _ColumnNamesArray_33.SetAt(10, "SPositionId");
      _ColumnIdsArray_33.SetAt(10, 10);
      _ColumnNamesArray_33.SetAt(11, "SPositionBC");
      _ColumnIdsArray_33.SetAt(11, 11);
      _ColumnNamesArray_33.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_33.SetAt(12, 12);
      _ColumnNamesArray_33.SetAt(13, "UserName");
      _ColumnIdsArray_33.SetAt(13, 13);
      _ExperimentsArray_33.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_33, 0, _ColumnIdsArray_33, _ColumnNamesArray_33, _ExperimentsArray_33, "SupernatantToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_ElutionBufferl_384MPHRocketTips <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }
} // library namespace
