#pragma global
#include "HSLStrLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLSeqLib.hsl"
#include "Labware Properties\\Resources\\LPQ_GLOBAL.hsl"
#include "HSLDevLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "Alpha Numeric Conversion\\Alpha Numeric Conversion.hs_"
#include "HSLErrLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLDeckVisualize.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace LPQ {
  function ADJUST_AddCarrierToDeckSite( device & Instrument, variable i_str_ConfigFile, variable i_str_NewLabwareID, variable i_int_DeckPosition ) void ;
  function ADJUST_AddContainerToPosition( device & Instrument, sequence i_seq_LabwareToChange, variable i_str_NewContainerFile, variable i_flt_OffsetX, variable i_flt_OffsetY, variable i_flt_OffsetZ ) void ;
  function ADJUST_AddContainerToPositions( device & Instrument, sequence i_seq_LabwareToChange, variable i_str_NewContainerFile, variable i_flt_OffsetX, variable i_flt_OffsetY, variable i_flt_OffsetZ ) void ;
  function ADJUST_ChangeLabwareID( device & Instrument, variable i_str_LabwareID, variable i_str_NewLabID ) void ;
  function ADJUST_GetCurrentStack( device & Instrument, variable i_str_LabwareNameForStack, variable & o_arr_StackedLabware[] ) void ;
  function ADJUST_MoveLabwareSite( device & Instrument, sequence i_seq_LabwareToAdjust, variable i_str_NewSiteID ) void ;
  function ADJUST_MoveLabwareToDeckSite( device & Instrument, variable i_str_Labware, variable i_str_Template, variable i_str_Site ) void ;
  private function ADJUST_MoveSitesDelta( device & Instrument, variable i_str_Template, variable i_flt_DeltaX, variable i_flt_DeltaY, variable i_flt_DeltaZ ) void ;
  function ADJUST_OffsetWells( device & Instrument, sequence i_seq_LabwarePositionsToOffset, variable i_flt_X_Offset, variable i_flt_Y_Offset ) void ;
  function ADJUST_OffsetWells2( device & Instrument, sequence i_seq_LabwarePositionsToOffset, variable i_flt_X_Offset, variable i_flt_Y_Offset, variable i_flt_Z_Offset ) void ;
  function ADJUST_RotateLabware( device & Instrument, sequence i_seq_LabwarePositionsToOffset, variable i_flt_TargetRotation ) void ;
  function ADJUST_SetAbsolutePosition( device & Instrument, sequence i_seq_LabwarePositionsToAdjust, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void ;
  function ADJUST_SetAbsolutePositionForLabwareID( device & Instrument, variable i_strLabwareID, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void ;
  function ADJUST_SetProperties( device & Instrument, sequence i_seq_LabwarePositionsToAdjust, variable i_strPropertyKey, variable i_strProperyValue ) void ;
  function ADJUST_SetPropertiesForLabwareID( device & Instrument, variable i_strLabwareID, variable i_strPropertyKey, variable i_strProperyValue ) void ;
  function ADJUST_SetRelativePosition( device & Instrument, sequence i_seq_LabwarePositionsToAdjust, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void ;
  function ADJUST_SetRelativePositionForLabwareID( device & Instrument, variable & i_strLabwareID, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void ;
  function ADJUST_StackCreateAtTemplateSite( device & Instrument, variable i_str_ConfigFile, variable i_str_LabwareNameForStack, variable i_str_TemplateID, variable i_str_TemplateSiteID, variable i_int_TotalStack, variable i_int_LabwareType, variable i_bln_LiddedLabware, variable & o_arr_StackedLabware[] ) void ;
  function ADJUST_StackDecrease( device & Instrument, variable i_str_LabwareNameForStack, variable & o_arr_StackedLabware[] ) void ;
  function ADJUST_StackIncrease( device & Instrument, variable i_str_LabwareNameForStack, variable & o_str_LabwareID ) void ;
  function ADJUST_TiltLabware( device & Instrument, sequence i_seq_LabwarePositionsToOffset, variable i_bool_ShiftToDeepestPoint, variable i_flt_TiltAngle, variable i_flt_XOffset, variable i_flt_ZOffset ) void ;
  function CONT_GetBaseMeasurement( device & Instrument, sequence & i_seq_Labware, variable & o_flt_ContainerBaseThickness, variable & o_flt_ContainerBaseOffset ) void ;
  function CONT_GetConfigFile( device & Instrument, sequence i_seq_Labware, variable & o_str_ContainerFileName ) void ;
  function CONT_GetContainerBaseThickness( device & Instrument, sequence i_seq_Labware, variable & o_containerBaseThickness ) void ;
  function CONT_GetContainerDepth( device & Instrument, sequence i_seq_Labware, variable i_bool_UseDeckCoordinates, variable & o_ContainerDepth, variable & o_ContainerClearanceHeight ) void ;
  function CONT_GetContainerWidth( device & Instrument, sequence i_seq_Labware, variable & o_flt_ContainerWidth ) void ;
  function FILE_GetDefinitionFileValue( variable & i_str_ConfigFilePath, variable i_str_ValueToSearch, variable & o_str_Value ) variable ;
  function LABWARE_GetCarrierAndSiteID( device & Instrument, sequence i_seq_Labware, variable & o_str_TemplateID, variable & o_str_TemplateSiteID ) void ;
  function LABWARE_GetCarrierTracks( device & Instrument, sequence i_seq_Labware, variable & o_int_TotalTracks, variable & o_int_LeftMostTrack, variable & o_int_RightMostTrack ) void ;
  function LABWARE_GetConfigFile( device & Instrument, sequence i_seq_Labware, variable & o_str_ConfigFilePath ) void ;
  function LABWARE_GetContainerBaseOffset( device & Instrument, sequence i_seq_Labware, variable & o_flt_ContainerBaseOffset ) void ;
  function LABWARE_GetCurrentPosition( device & Instrument, sequence i_seq_Labware, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void ;
  function LABWARE_GetDescription( device & Instrument, sequence i_seq_Labware, variable & o_str_LabwareDescription ) void ;
  function LABWARE_GetFirstPosition( device & Instrument, variable i_str_LabID, variable & o_str_PosID ) void ;
  function LABWARE_GetLabwareCenter( device & Instrument, sequence i_seq_Labware, variable & o_flt_X_Center, variable & o_flt_Y_Center ) void ;
  function LABWARE_GetLabwareLW( device & Instrument, sequence i_seq_Labware, variable & o_flt_Labware_L, variable & o_flt_Labware_W ) void ;
  function LABWARE_GetLabwareOrigin( device & Instrument, sequence i_seq_Labware, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void ;
  function LABWARE_GetLabwareStackHeight( device & Instrument, sequence i_seq_Labware, variable & o_flt_LabwareStackHeight ) void ;
  function LABWARE_GetLabwareViewName( device & Instrument, sequence i_seq_Labware, variable & o_str_LabwareViewName ) void ;
  function LABWARE_GetRackHeight( device & Instrument, sequence i_seq_Labware, variable i_bool_UseDeckCoordinates, variable & o_flt_RackHeight, variable & o_flt_RackClearanceHeight ) void ;
  function LABWARE_GetRowColumnNumber( device & Instrument, sequence i_seq_Labware, variable & o_int_RowCount, variable & o_int_ColumnCount, variable & o_bool_AlphaNumeric, variable & o_bool_IncrementContainer ) void ;
  function LABWARE_GetVisibility( device & Instrument, sequence i_seq_Labware, variable & o_bool_LabwareVisibility ) void ;
  function LABWARE_IsContainersConnected( device & Instrument, sequence i_seq_Labware, variable & o_bool_ConnectedContainer ) void ;
  function SEQ_GetDefaultSequence( device & Instrument, variable i_str_LabID, variable i_bool_SortByColumn, sequence & o_seq_DefaultSequence ) void ;
  private function SEQ_GetDefaultSequenceForLabware( device & Instrument, variable i_str_LabwareID, sequence & o_seq_DefaultSequence ) void ;
  function SEQ_ReloadSequence( device & Instrument, sequence & io_seq_SequenceToReload ) void ;
  function TEMPLATE_GetConfigFile( device & Instrument, sequence i_seq_Labware, variable & o_str_ConfigFilePath ) void ;
  function TEMPLATE_GetConfigFile2( device & Instrument, variable i_str_Labware, variable & o_str_ConfigFilePath ) void ;
  function TEMPLATE_GetTemplateOrigin( device & Instrument, sequence i_seq_Labware, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void ;
  function TEMPLATE_GetTemplateOrigin2( device & Instrument, variable i_str_TemplateLabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void ;
  private function _CalcualteOffsetHeight( variable i_flt_WellAngle, variable i_flt_YOffset, variable & o_flt_ZOffset ) void ;
  private function _CalculateWellAngle( variable i_flt_BottomWellSegment_Height, variable i_flt_BottomWellSegment_TopWidth, variable i_flt_BottomWellSegment_BottomWidth, variable & o_flt_BottomWellSegment_Angle ) void ;
  private function _ConvertToFloat( variable iVariable, variable & oVariable ) void ;
  private function _ConvertToInteger( variable iVariable, variable & oVariable ) void ;
  private function _FunctionError( variable i_str_FunctionName, variable i_str_ErrorDescription ) void ;
  private function _GetLabwareOrigin( device & Instrument, variable i_str_LabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void ;
  private function _GetLabwareWL( device & Instrument, variable i_str_LabID, variable & o_flt_LabwareWidth, variable & o_flt_LabwareLength ) void ;
  private function _GetSequencePosition( device & Instrument, sequence i_seq_LabwareSequence, variable & o_str_LabID, variable & o_str_PosID ) variable ;
  private function _Lookup( variable & array[], variable item ) variable ;
  private function _RemoveTruncatedSequencePositions( device & Instrument, sequence & io_Sequence ) void ;
  function _InitLibrary() {
    ANC::_InitLibrary();
  }
  function _ExitLibrary() {
    ANC::_ExitLibrary();
  }

  private function _Lookup( variable & array[], variable item ) variable {
    private variable index;
    private variable lookupreturn;
    lookupreturn = Util::Lookup(array, item, index);
    if (lookupreturn > 0)
    {
      index = index + 1;
      return (index);
    }
    else
    {
      return (0);
    }
  }

  function ADJUST_ChangeLabwareID( device & Instrument, variable i_str_LabwareID, variable i_str_NewLabID ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    Trace("Labware ID:  ",i_str_LabwareID,"  -  ","New ID:  ",i_str_NewLabID);
    {
         object objDeckLayout;
         //object objLabware;
         object objEditDeckLayout8;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              objDeckLayout.GetObject("IEditDeckLayout8", objEditDeckLayout8);
              objEditDeckLayout8.RenameLabware(i_str_NewLabID,i_str_LabwareID);
         }
         objDeckLayout.ReleaseObject();
         objEditDeckLayout8.ReleaseObject();
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function ADJUST_MoveLabwareSite( device & Instrument, sequence i_seq_LabwareToAdjust, variable i_str_NewSiteID ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable str_CurrentTemplate;
    private variable str_LabID;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_PosID;
    private variable bool_SequenceValid;
    private variable str_CurrentSite;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_LabwareToAdjust, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    LABWARE_GetCarrierAndSiteID(Instrument, i_seq_LabwareToAdjust, str_CurrentTemplate, str_CurrentSite);
    Trace("Move ",str_LabID," on ",str_CurrentTemplate," from ",str_CurrentSite," to ",i_str_NewSiteID);
    {
         object objDeckLayout;
         object objLabware;
         object objEditDeckLayout8;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              objLabware = objDeckLayout.Labware(str_CurrentTemplate);
              objLabware.GetObject("ITemplate", objEditDeckLayout8);
              objEditDeckLayout8.MoveLabware(str_LabID,i_str_NewSiteID);
         }
         objDeckLayout.ReleaseObject();
         objEditDeckLayout8.ReleaseObject();
         objLabware.ReleaseObject();
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function ADJUST_MoveLabwareToDeckSite( device & Instrument, variable i_str_Labware, variable i_str_Template, variable i_str_Site ) void {
    {
         object objDeckLayout;
         object objLabware;
         object objEditDeckLayout8;
         object objTemplate;
         object objEditTemplate;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              objLabware = objDeckLayout.Labware(i_str_Labware);
              objDeckLayout.GetObject("IEditDeckLayout6", objEditDeckLayout8);
              objTemplate = objDeckLayout.Labware(i_str_Template);
              //objTemplate.GetObject("ITemplate",objEditTemplate);
              objEditDeckLayout8.MoveLabwareToDeckSite(objLabware,i_str_Template,i_str_Site);
              //objEditDeckLayout8.AddLabwareToDeckSite(objLabware,i_str_Site,i_str_Labware+"1",i_str_Template);
              //objEditDeckLayout8.BringToFront(i_str_Labware,i_str_Template);
         }
         objDeckLayout.ReleaseObject();
         objEditDeckLayout8.ReleaseObject();
         objLabware.ReleaseObject();
    }
  }

  private function ADJUST_MoveSitesDelta( device & Instrument, variable i_str_Template, variable i_flt_DeltaX, variable i_flt_DeltaY, variable i_flt_DeltaZ ) void {
    {
         object objDeckLayout;
         object objLabware;
         object objEditDeckLayout8;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              objLabware = objDeckLayout.Labware(i_str_Template);
              objLabware.GetObject("ITemplate", objEditDeckLayout8);
              objEditDeckLayout8.MoveSitesDelta(i_flt_DeltaX,i_flt_DeltaY,i_flt_DeltaZ);
         }
         objDeckLayout.ReleaseObject();
         objEditDeckLayout8.ReleaseObject();
         objLabware.ReleaseObject();
    }
  }

  function ADJUST_OffsetWells( device & Instrument, sequence i_seq_LabwarePositionsToOffset, variable i_flt_X_Offset, variable i_flt_Y_Offset ) void {
    private variable flt_ContainerXOffset;
    private variable int_CutNum;
    private variable flt_ContainerYOffset;
    private variable str_ContainerFilePath;
    private variable int_Length;
    private variable flt_ContainerBottomWidth;
    private variable int_LabwareCount;
    private variable flt_Y_Offset;
    private variable flt_MaximumRadius;
    private variable strFunctionName;
    private variable str_SearchValue;
    private variable flt_WellOffset2;
    private variable int_LabwareIndex;
    private variable flt_WellAngle;
    private variable strFunctionName_Cut;
    private variable flt_ContainerBaseOffset;
    private variable str_LabID;
    private variable flt_ContainerBottomHeight;
    private variable int_ContainerExists;
    private variable flt_Z_Offset;
    private variable flt_WellOffsetSum;
    private variable str_ShapeValue;
    private variable int_SegmentCount;
    private variable str_Return;
    private variable flt_BottomSegmentRadius;
    private variable flt_WellOffset;
    private variable int_Count;
    private variable bool_SequenceValid;
    private variable str_PosID;
    private variable flt_X_Offset;
    private variable str_LabwareConfigFilePath;
    private variable flt_ContainerTopWidth;
    private variable int_ContainerShape;
    private variable int_Index;
    private variable int_TotalPositions;
    private sequence seq_Temp;
    private variable arr_LabwareIDs[];
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_LabwarePositionsToOffset, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    if (LPQ::LABWARE_OFFSET_GLOBAL::BOOL_LIBRARY_INITIALIZED == 0)
    {
      LPQ::InitializeVariables();
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_HEIGHT.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_WIDTH.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_CONFIG_FILE.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_SHAPE.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_TOP_WIDTH.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_BASE_OFFSET.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_X_OFFSET.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_Y_OFFSET.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::BOOL_LIBRARY_INITIALIZED = 1;
    }
    _RemoveTruncatedSequencePositions(Instrument, i_seq_LabwarePositionsToOffset);
    SeqGetLabwareIds(i_seq_LabwarePositionsToOffset, arr_LabwareIDs);
    int_LabwareCount=arr_LabwareIDs.GetSize();
    {
      for(int_LabwareIndex = 0; int_LabwareIndex < int_LabwareCount;)
      {
        int_LabwareIndex = int_LabwareIndex + 1;
        str_LabID=arr_LabwareIDs.GetAt(int_LabwareIndex-1);
        SEQ_GetDefaultSequence(Instrument, str_LabID, 1, seq_Temp);
        int_TotalPositions = SeqGetPositionCountForCurrLabware(i_seq_LabwarePositionsToOffset);
        Trace("Total Positions:  ",int_TotalPositions);
        LABWARE_GetConfigFile(Instrument, seq_Temp, str_LabwareConfigFilePath);
        CONT_GetConfigFile(Instrument, seq_Temp, str_ContainerFilePath);
        {
          for(int_Index = 0; int_Index < int_TotalPositions;)
          {
            int_Index = int_Index + 1;
            flt_Z_Offset = 0.0;
            flt_WellOffset = 0.0;
            flt_WellOffsetSum = 0.0;
            flt_X_Offset = i_flt_X_Offset;
            flt_Y_Offset = i_flt_Y_Offset;
            if (flt_X_Offset < 0)
            {
              flt_X_Offset = flt_X_Offset * -1;
            }
            if (flt_Y_Offset < 0)
            {
              flt_Y_Offset = flt_Y_Offset * -1;
            }
            flt_X_Offset = flt_X_Offset^2;
            flt_Y_Offset = flt_Y_Offset^2;
            flt_WellOffsetSum = flt_X_Offset + flt_Y_Offset;
            flt_WellOffset = MthPow(flt_WellOffsetSum, 0.5);
            flt_WellOffset2 = MthRound(flt_WellOffset, 1);
            if(0){
              Trace("Well Offset 2:  ",flt_WellOffset2);
            }
            str_LabID = SeqGetLabwareId(i_seq_LabwarePositionsToOffset);
            str_PosID = SeqGetPositionId(i_seq_LabwarePositionsToOffset);
            int_ContainerExists = _Lookup(LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_CONFIG_FILE, str_ContainerFilePath);
            if (int_ContainerExists == 0)
            {
              FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, Translate("Cntr.1.offsetx"), str_Return);
              _ConvertToFloat(str_Return, flt_ContainerXOffset);
              FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, Translate("Cntr.1.offsety"), str_Return);
              _ConvertToFloat(str_Return, flt_ContainerYOffset);
              FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, Translate("Cntr.1.base"), str_Return);
              _ConvertToFloat(str_Return, flt_ContainerBaseOffset);
              FILE_GetDefinitionFileValue(str_ContainerFilePath, Translate("Segments"), str_Return);
              _ConvertToInteger(str_Return, int_SegmentCount);
              str_ShapeValue = StrConcat2(int_SegmentCount, Translate(".Shape"));
              FILE_GetDefinitionFileValue(str_ContainerFilePath, str_ShapeValue, str_Return);
              _ConvertToInteger(str_Return, int_ContainerShape);
              if (int_ContainerShape == 0)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DY"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DY"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              if (int_ContainerShape == 1)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DX"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DY"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              if (int_ContainerShape == 2)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DX"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DY"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              if (int_ContainerShape == 3)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DX"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DY"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              if (int_ContainerShape == 4)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DX"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                flt_ContainerBottomWidth = 0.0;
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              if (int_ContainerShape == 5)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DX"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                flt_ContainerBottomWidth = 0.0;
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_SHAPE.AddAsLast(int_ContainerShape);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_CONFIG_FILE.AddAsLast(str_ContainerFilePath);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_TOP_WIDTH.AddAsLast(flt_ContainerTopWidth);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_WIDTH.AddAsLast(flt_ContainerBottomWidth);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_HEIGHT.AddAsLast(flt_ContainerBottomHeight);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_BASE_OFFSET.AddAsLast(flt_ContainerBaseOffset);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_X_OFFSET.AddAsLast(flt_ContainerXOffset);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_Y_OFFSET.AddAsLast(flt_ContainerYOffset);
            }
            else
            {
              int_ContainerShape=LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_SHAPE.GetAt(int_ContainerExists-1);
              str_ContainerFilePath=LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_CONFIG_FILE.GetAt(int_ContainerExists-1);
              flt_ContainerTopWidth=LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_TOP_WIDTH.GetAt(int_ContainerExists-1);
              flt_ContainerBottomWidth=LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_WIDTH.GetAt(int_ContainerExists-1);
              flt_ContainerBottomHeight=LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_HEIGHT.GetAt(int_ContainerExists-1);
              flt_ContainerBaseOffset=LPQ::LABWARE_OFFSET_GLOBAL::ARR_BASE_OFFSET.GetAt(int_ContainerExists-1);
              flt_ContainerXOffset=LPQ::LABWARE_OFFSET_GLOBAL::ARR_X_OFFSET.GetAt(int_ContainerExists-1);
              flt_ContainerYOffset=LPQ::LABWARE_OFFSET_GLOBAL::ARR_Y_OFFSET.GetAt(int_ContainerExists-1);
            }
            flt_MaximumRadius = flt_ContainerTopWidth / (2 * 1.0);
            if (flt_WellOffset2 > flt_MaximumRadius)
            {
              flt_WellOffset2 = flt_MaximumRadius;
            }
            flt_BottomSegmentRadius = flt_ContainerBottomWidth / (2 * 1.0);
            flt_WellOffset = flt_WellOffset2 - flt_BottomSegmentRadius;
            if (flt_WellOffset < 0)
            {
              flt_WellOffset = 0.0;
            }
            if (int_ContainerShape == 3)
            {
              _CalculateWellAngle(flt_ContainerBottomHeight, flt_ContainerTopWidth, flt_ContainerBottomWidth, flt_WellAngle);
              _CalcualteOffsetHeight(flt_WellAngle, flt_WellOffset, flt_Z_Offset);
            }
            if (int_ContainerShape == 4)
            {
              _CalculateWellAngle(flt_ContainerBottomHeight, flt_ContainerTopWidth, flt_ContainerBottomWidth, flt_WellAngle);
              _CalcualteOffsetHeight(flt_WellAngle, flt_WellOffset, flt_Z_Offset);
            }
            if (int_ContainerShape == 5)
            {
              _CalculateWellAngle(flt_ContainerBottomHeight, flt_ContainerTopWidth, flt_ContainerBottomWidth, flt_WellAngle);
              _CalcualteOffsetHeight(flt_WellAngle, flt_WellOffset, flt_Z_Offset);
            }
            Trace("Lab ID:  ",str_LabID," Pos ID:  ",str_PosID," X Offset:  ",i_flt_X_Offset," Y Offset:  ",i_flt_Y_Offset,"  Z Offset:  ",flt_Z_Offset);
            flt_X_Offset = i_flt_X_Offset + flt_ContainerXOffset;
            flt_Y_Offset = i_flt_Y_Offset + flt_ContainerYOffset;
            flt_Z_Offset = flt_Z_Offset + flt_ContainerBaseOffset;
            DevAddContainerToRack(Instrument, str_LabID, str_PosID, str_ContainerFilePath, flt_X_Offset, flt_Y_Offset, flt_Z_Offset);
            SeqIncrement(i_seq_LabwarePositionsToOffset, 1);
          }
        }
      }
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function ADJUST_OffsetWells2( device & Instrument, sequence i_seq_LabwarePositionsToOffset, variable i_flt_X_Offset, variable i_flt_Y_Offset, variable i_flt_Z_Offset ) void {
    private variable flt_ContainerXOffset;
    private variable int_CutNum;
    private variable flt_ContainerYOffset;
    private variable str_ContainerFilePath;
    private variable int_Length;
    private variable i;
    private variable flt_Y_Offset;
    private variable int_LabwareCount;
    private variable flt_ContainerBottomWidth;
    private variable strFunctionName;
    private variable str_SearchValue;
    private variable int_LabwareIndex;
    private variable strFunctionName_Cut;
    private variable flt_ContainerBaseOffset;
    private variable flt_ContainerBottomHeight;
    private variable str_LabID;
    private variable int_ContainerExists;
    private variable flt_Z_Offset;
    private variable str_ShapeValue;
    private variable int_SegmentCount;
    private variable str_Return;
    private variable int_Count;
    private variable bool_SequenceValid;
    private variable str_PosID;
    private variable flt_X_Offset;
    private variable flt_ContainerTopWidth;
    private variable int_ContainerShape;
    private variable str_LabwareConfigFilePath;
    private variable int_TotalPositions;
    private sequence seq_Temp;
    private variable arr_LabwareIDs[];
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_LabwarePositionsToOffset, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    _RemoveTruncatedSequencePositions(Instrument, i_seq_LabwarePositionsToOffset);
    if (LPQ::LABWARE_OFFSET_GLOBAL::BOOL_LIBRARY_INITIALIZED == 0)
    {
      LPQ::InitializeVariables();
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_HEIGHT.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_WIDTH.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_CONFIG_FILE.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_SHAPE.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_TOP_WIDTH.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_BASE_OFFSET.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_X_OFFSET.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::ARR_Y_OFFSET.SetSize(0);
      LPQ::LABWARE_OFFSET_GLOBAL::BOOL_LIBRARY_INITIALIZED = 1;
    }
    int_TotalPositions = SeqGetTotal(i_seq_LabwarePositionsToOffset);
    SeqGetLabwareIds(i_seq_LabwarePositionsToOffset, arr_LabwareIDs);
    int_LabwareCount=arr_LabwareIDs.GetSize();
    {
      for(int_LabwareIndex = 0; int_LabwareIndex < int_LabwareCount;)
      {
        int_LabwareIndex = int_LabwareIndex + 1;
        str_LabID=arr_LabwareIDs.GetAt(int_LabwareIndex-1);
        SEQ_GetDefaultSequence(Instrument, str_LabID, 1, seq_Temp);
        int_TotalPositions = SeqGetPositionCountForCurrLabware(i_seq_LabwarePositionsToOffset);
        LABWARE_GetConfigFile(Instrument, seq_Temp, str_LabwareConfigFilePath);
        CONT_GetConfigFile(Instrument, seq_Temp, str_ContainerFilePath);
        Trace("Total Positions:  ",int_TotalPositions);
        {
          for(i = 0; i < int_TotalPositions;)
          {
            i = i + 1;
            flt_Z_Offset = 0.0;
            str_LabID = SeqGetLabwareId(i_seq_LabwarePositionsToOffset);
            str_PosID = SeqGetPositionId(i_seq_LabwarePositionsToOffset);
            int_ContainerExists = _Lookup(LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_CONFIG_FILE, str_ContainerFilePath);
            if (int_ContainerExists == 0)
            {
              str_ShapeValue = StrConcat2(int_SegmentCount, Translate(".Shape"));
              FILE_GetDefinitionFileValue(str_ContainerFilePath, str_ShapeValue, str_Return);
              _ConvertToInteger(str_Return, int_ContainerShape);
              if (int_ContainerShape == 0)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DY"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DY"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              if (int_ContainerShape == 1)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DX"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DY"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              if (int_ContainerShape == 2)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DX"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DY"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              if (int_ContainerShape == 3)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DX"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DY"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomWidth);
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              if (int_ContainerShape == 4)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DX"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                flt_ContainerBottomWidth = 0.0;
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              if (int_ContainerShape == 5)
              {
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".DX"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerTopWidth);
                flt_ContainerBottomWidth = 0.0;
                str_SearchValue = StrConcat2(int_SegmentCount, Translate(".Max"));
                FILE_GetDefinitionFileValue(str_ContainerFilePath, str_SearchValue, str_Return);
                _ConvertToFloat(str_Return, flt_ContainerBottomHeight);
              }
              FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, Translate("Cntr.1.offsetx"), str_Return);
              _ConvertToFloat(str_Return, flt_ContainerXOffset);
              FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, Translate("Cntr.1.offsety"), str_Return);
              _ConvertToFloat(str_Return, flt_ContainerYOffset);
              FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, Translate("Cntr.1.base"), str_Return);
              _ConvertToFloat(str_Return, flt_ContainerBaseOffset);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_SHAPE.AddAsLast(int_ContainerShape);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_CONFIG_FILE.AddAsLast(str_ContainerFilePath);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_TOP_WIDTH.AddAsLast(flt_ContainerTopWidth);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_WIDTH.AddAsLast(flt_ContainerBottomWidth);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_HEIGHT.AddAsLast(flt_ContainerBottomHeight);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_BASE_OFFSET.AddAsLast(flt_ContainerBaseOffset);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_X_OFFSET.AddAsLast(flt_ContainerXOffset);
              LPQ::LABWARE_OFFSET_GLOBAL::ARR_Y_OFFSET.AddAsLast(flt_ContainerYOffset);
            }
            else
            {
              int_ContainerShape=LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_SHAPE.GetAt(int_ContainerExists-1);
              str_ContainerFilePath=LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_CONFIG_FILE.GetAt(int_ContainerExists-1);
              flt_ContainerTopWidth=LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_TOP_WIDTH.GetAt(int_ContainerExists-1);
              flt_ContainerBottomWidth=LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_WIDTH.GetAt(int_ContainerExists-1);
              flt_ContainerBottomHeight=LPQ::LABWARE_OFFSET_GLOBAL::ARR_CONTAINER_BOTTOM_HEIGHT.GetAt(int_ContainerExists-1);
              flt_ContainerBaseOffset=LPQ::LABWARE_OFFSET_GLOBAL::ARR_BASE_OFFSET.GetAt(int_ContainerExists-1);
              flt_ContainerXOffset=LPQ::LABWARE_OFFSET_GLOBAL::ARR_X_OFFSET.GetAt(int_ContainerExists-1);
              flt_ContainerYOffset=LPQ::LABWARE_OFFSET_GLOBAL::ARR_Y_OFFSET.GetAt(int_ContainerExists-1);
            }
            Trace("Lab ID:  ",str_LabID," Pos ID:  ",str_PosID," X Offset:  ",i_flt_X_Offset," Y Offset:  ",i_flt_Y_Offset,"  Z Offset:  ",i_flt_Z_Offset);
            flt_X_Offset = i_flt_X_Offset + flt_ContainerXOffset;
            flt_Y_Offset = i_flt_Y_Offset + flt_ContainerYOffset;
            flt_Z_Offset = i_flt_Z_Offset + flt_ContainerBaseOffset;
            DevAddContainerToRack(Instrument, str_LabID, str_PosID, str_ContainerFilePath, flt_X_Offset, flt_Y_Offset, flt_Z_Offset);
            SeqIncrement(i_seq_LabwarePositionsToOffset, 1);
          }
        }
      }
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function ADJUST_RotateLabware( device & Instrument, sequence i_seq_LabwarePositionsToOffset, variable i_flt_TargetRotation ) void {
    private variable int_CutNum;
    private variable flt_A_Difference;
    private variable flt_CurrentX;
    private variable int_Length;
    private variable flt_CurrentY;
    private variable flt_DeltaX;
    private variable flt_CurrentZ;
    private variable strFunctionName;
    private variable flt_DeltaY;
    private variable flt_CenterY2;
    private variable strFunctionName_Cut;
    private variable flt_CenterX2;
    private variable str_LabID;
    private variable flt_CurrentA;
    private variable int_Count;
    private variable flt_CenterX;
    private variable str_PosID;
    private variable bool_SequenceValid;
    private variable flt_CenterY;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_LabwarePositionsToOffset, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    _RemoveTruncatedSequencePositions(Instrument, i_seq_LabwarePositionsToOffset);
    DevGetLabwarePosition(Instrument, str_LabID, flt_CurrentX, flt_CurrentY, flt_CurrentZ, flt_CurrentA);
    flt_A_Difference = i_flt_TargetRotation - flt_CurrentA;
    LABWARE_GetLabwareCenter(Instrument, i_seq_LabwarePositionsToOffset, flt_CenterX, flt_CenterY);
    Trace("Current X:  ",flt_CurrentX,"  Current Y:  ",flt_CurrentY);
    Trace("Rotation Difference:  ",flt_A_Difference);
    Trace("Center X:  ",flt_CenterX,"  Center Y:  ",flt_CenterY);
    flt_DeltaX = 0.0;
    flt_DeltaY = 0.0;
    ADJUST_SetRelativePositionForLabwareID(Instrument, str_LabID, 0.0, 0.0, 0.0, flt_A_Difference);
    LABWARE_GetLabwareCenter(Instrument, i_seq_LabwarePositionsToOffset, flt_CenterX2, flt_CenterY2);
    flt_DeltaX = flt_CenterX - flt_CenterX2;
    flt_DeltaY = flt_CenterY - flt_CenterY2;
    ADJUST_SetRelativePositionForLabwareID(Instrument, str_LabID, flt_DeltaX, flt_DeltaY, 0.0, 0.0);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function ADJUST_SetAbsolutePosition( device & Instrument, sequence i_seq_LabwarePositionsToAdjust, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_PosID;
    private variable bool_SequenceValid;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_LabwarePositionsToAdjust, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    ADJUST_SetAbsolutePositionForLabwareID(Instrument, str_LabID, i_fltPositionX, i_fltPositionY, i_fltPositionZ, i_fltPositionR);
  }

  function ADJUST_SetAbsolutePositionForLabwareID( device & Instrument, variable i_strLabwareID, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void {
    // Set Absolute Position
    {
          static string P_XCOORD("Labwr_XCoord");
          static string P_YCOORD("Labwr_YCoord");
          static string P_ZCOORD("Labwr_ZCoord");
          static string P_RZCOORD("Labwr_Rotation");
          static string P_LABWARE_ID("Labwr_Id");
            variable PosVals[];
            object   objDecklayout;
            variable strFunctionName("");
            //strFunctionName = ExtractFunctionName(GetFunctionName());
            // check input variables
            //if (!CheckString(i_strLabwareID, "i_strLabwareID", strFunctionName)) return(hslFalse);
            //StatusTrace(CMD_START, TRACE_LEVEL_DEBUG, "i_strLabwareID = " + i_strLabwareID + ", i_fltPositionX = " + FStr(i_fltPositionX) + ", i_fltPositionY = " + FStr(i_fltPositionY) + ", i_fltPositionZ = " + FStr(i_fltPositionZ) + ", i_fltPositionR = " + FStr(i_fltPositionR), strFunctionName);
            //EnterSemaphore();
            objDecklayout = Instrument.GetDeckLayoutObject();
            //LeaveSemaphore();
            if (!objDecklayout.IsNull())
            {
                object objLabware;
                onerror goto HandleLabwareError;
                objLabware = objDecklayout.Labware(i_strLabwareID);
                onerror goto 0;
                err.Clear();
                if (!objLabware.IsNull())
                {
                    object Decklayout5;
                    object MoveParameters;
                    objDecklayout.GetObject("IDeckLayout5", Decklayout5);
                    //EnterSemaphore();
                    //io_devDevice.GetLabwarePosition(i_strLabwareID, PosVals);
                    //LeaveSemaphore();
                    //StatusTrace(CMD_PROGRESS, TRACE_LEVEL_DEBUG, "Current position: (" + FStr(PosVals[0]) + "/" + FStr(PosVals[1]) + "/" + FStr(PosVals[2]) + "/" + FStr(PosVals[3]) + ")", strFunctionName);
                    MoveParameters.CreateObject("HXPARAMSLib.HxPars");
                    MoveParameters.Add(i_strLabwareID, P_LABWARE_ID);
                    MoveParameters.Add(i_fltPositionX, P_XCOORD);
                    MoveParameters.Add(i_fltPositionY, P_YCOORD);
                    MoveParameters.Add(i_fltPositionZ, P_ZCOORD);
                    MoveParameters.Add(i_fltPositionR, P_RZCOORD);
                    Decklayout5.MoveLabware(objLabware, MoveParameters);
                    // Trace new position
                    //EnterSemaphore();
                    //io_devDevice.GetLabwarePosition(i_strLabwareID, PosVals);
                    //LeaveSemaphore();
                    objLabware.ReleaseObject();
                    objDecklayout.ReleaseObject();
                    Decklayout5.ReleaseObject();
                    MoveParameters.ReleaseObject();
                    //StatusTrace(CMD_COMPLETE, TRACE_LEVEL_DEBUG, "New position:     (" + FStr(PosVals[0]) + "/" + FStr(PosVals[1]) + "/" + FStr(PosVals[2]) + "/" + FStr(PosVals[3]) + ")", strFunctionName);
                    //return(hslTrue);
                }
                //else
                //{
                  //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find labware.", strFunctionName);
                  //objDecklayout.ReleaseObject();
                  //return(hslFalse);
                //}
             // }
              //else
              //{
                //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find decklayout.", strFunctionName);
                //return(hslFalse);
            }
            // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
        //Trace(errorID);
                if (errorID==-1574764487)
                {
                    Trace("LabwareID is  unknown.");
                    //return(hslFalse);
                }
                else
                {
                    //Trace("Unknown error occured.");
                    //return(hslFalse);
                }
            }
    }
  }

  function ADJUST_SetProperties( device & Instrument, sequence i_seq_LabwarePositionsToAdjust, variable i_strPropertyKey, variable i_strProperyValue ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_PosID;
    private variable bool_SequenceValid;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_LabwarePositionsToAdjust, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    ADJUST_SetPropertiesForLabwareID(Instrument, str_LabID, i_strPropertyKey, i_strProperyValue);
  }

  function ADJUST_SetPropertiesForLabwareID( device & Instrument, variable i_strLabwareID, variable i_strPropertyKey, variable i_strProperyValue ) void {
    private variable strLabwareID;
    private variable strProperyValue;
    private variable strPropertyKey;
    strPropertyKey = StrConcat2(i_strPropertyKey, Translate(""));
    strProperyValue = StrConcat2(i_strProperyValue, Translate(""));
    strLabwareID = StrConcat2(i_strLabwareID, Translate(""));
    Trace("Lab ID:  ",i_strLabwareID," Property Key:  ",strPropertyKey,"  Property Value:  ",strProperyValue);
        {
            object   objDecklayout;
            variable str_PropertyValue;
            str_PropertyValue = strProperyValue;
            //variable strFunctionName("");
            //strFunctionName = ExtractFunctionName(GetFunctionName());
            // check input variables
            //if (!CheckString(i_strPropertyValue, "i_strPropertyValue", strFunctionName)) return(hslFalse);
            //if (!CheckString(i_strPropertyKey, "i_strPropertyKey", strFunctionName)) return(hslFalse);
            //if (!CheckString(i_strLabwareID, "i_strLabwareID", strFunctionName)) return(hslFalse);
            //StatusTrace(CMD_START, TRACE_LEVEL_DEBUG, "i_strLabwareID = " + i_strLabwareID + ", i_strPropertyKey = " + i_strPropertyKey + ", i_strPropertyValue = " + i_strPropertyValue, strFunctionName);
            //EnterSemaphore();
            objDecklayout = Instrument.GetDeckLayoutObject();
            //LeaveSemaphore();
            if (!objDecklayout.IsNull())
            {
                object objLabware;
                onerror goto HandleLabwareError;
                objLabware = objDecklayout.Labware(i_strLabwareID);
                onerror goto 0;
                err.Clear();
                if (!objLabware.IsNull())
                {
                    object   objEditLabware5;
                    object   objPropertyParameters;
                    objLabware.GetObject("IEditLabware5", objEditLabware5);
                    // prepare a new Pars object for the labware properties
                    objPropertyParameters.CreateObject("HXPARAMSLib.HxPars");
                    objPropertyParameters.Add(str_PropertyValue, strPropertyKey);
                    // check data from the decklayout
                    objEditLabware5.SetLabwrProperties(objPropertyParameters);
                    str_PropertyValue = objPropertyParameters.Item1(strPropertyKey);
                    objPropertyParameters.ReleaseObject();
                    objEditLabware5.ReleaseObject();
                    objDecklayout.ReleaseObject();
                    objLabware.ReleaseObject();
                    //StatusTrace(CMD_COMPLETE, TRACE_LEVEL_DEBUG, "", strFunctionName);
                    //return(hslTrue);
                }
                else
                {
                    //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find labware.", strFunctionName);
                    objDecklayout.ReleaseObject();
                    //return(hslFalse);
                }
            }
            else
            {
                //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find decklayout.", strFunctionName);
                //return(hslFalse);
            }
            // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
                if (errorID==-1574764487)
                {
                    //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "LabwareID is  unknown.", strFunctionName);
                    //return(hslFalse);
                }
                else
                {
                    //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Unknown error occured.", strFunctionName);
                    //return(hslFalse);
                }
            }
        }
  }

  function ADJUST_SetRelativePosition( device & Instrument, sequence i_seq_LabwarePositionsToAdjust, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_PosID;
    private variable bool_SequenceValid;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_LabwarePositionsToAdjust, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    ADJUST_SetRelativePositionForLabwareID(Instrument, str_LabID, i_fltPositionX, i_fltPositionY, i_fltPositionZ, i_fltPositionR);
  }

  function ADJUST_SetRelativePositionForLabwareID( device & Instrument, variable & i_strLabwareID, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void {
    {
          // HxPars keys
          static string P_XCOORD("Labwr_XCoord");
          static string P_YCOORD("Labwr_YCoord");
          static string P_ZCOORD("Labwr_ZCoord");
          static string P_RZCOORD("Labwr_Rotation");
          static string P_LABWARE_ID("Labwr_Id");
          // Helper functions
          //private function ConvertToFloat(variable iVariable, variable& oVariable) variable;
          //private function CheckBool(variable iVariable, variable iTraceEntry, variable iFunctionName) variable;
          //private function CheckInteger(variable iVariable, variable iTraceEntry, variable iFunctionName) variable;
          //private function CheckIntegerRange(variable iVariable, variable iTraceEntry, variable iMin, variable iMax, variable iFunctionName) variable;
          //private function CheckString(variable iVariable, variable iTraceEntry, variable iFunctionName) variable;
          //private function CheckFloat(variable iVariable, variable iTraceEntry, variable iFunctionName) variable;
          //private function StatusTrace(variable i_intState, variable i_intTraceLevel, variable i_strTraceString, variable i_strFunctionName) void;
          //private function EnterSemaphore();
          //private function LeaveSemaphore();
          //private function ExtractFunctionName(variable i_strFunctionName) variable;
          //private function ReverseFind(string i_strString, string i_strSubString) variable;
          ////////////////////////////////////////////////////////////////////////////
          // RelativePositionValuesSetForLabwareID
          ////////////////////////////////////////////////////////////////////////////
          //function RelativePositionValuesSetForLabwareID(device& io_devDevice,
                                                        // variable i_strLabwareID,
                                                        // variable i_fltPositionX,
                                                        // variable i_fltPositionY,
                                                        // variable i_fltPositionZ,
                                                        // variable i_fltPositionR) variable
          {
              variable PosVals[];
              variable myValue;
              object   objDecklayout;
              variable strFunctionName("");
             // strFunctionName = ExtractFunctionName(GetFunctionName());
              // check input variables
             // if(!CheckString(i_strLabwareID, "i_strLabwareID", strFunctionName)) return(hslFalse);
              //StatusTrace(CMD_START, TRACE_LEVEL_DEBUG, "i_strLabwareID = " + i_strLabwareID, strFunctionName);
              //EnterSemaphore();
              objDecklayout = Instrument.GetDeckLayoutObject();
              //LeaveSemaphore();
              if(!objDecklayout.IsNull())
              {
                  object objLabware;
                  variable strPos("");
                  onerror goto HandleLabwareError;
                  objLabware = objDecklayout.Labware(i_strLabwareID);
                  onerror goto 0;
                  err.Clear();
                  if(!objLabware.IsNull())
                  {
                      object Decklayout5;
                      object MoveParameters;
                      variable fltPos, fltPosShift;
                      objDecklayout.GetObject("IDeckLayout5", Decklayout5);
                      MoveParameters.CreateObject("HXPARAMSLib.HxPars");
                      MoveParameters.Add(i_strLabwareID, P_LABWARE_ID);
                      //EnterSemaphore();
                      Instrument.GetLabwarePosition(i_strLabwareID, PosVals);
                      //LeaveSemaphore();
                      //StatusTrace(CMD_PROGRESS, TRACE_LEVEL_DEBUG, "Current position: (" + FStr(PosVals[0]) + "/" + FStr(PosVals[1]) + "/" + FStr(PosVals[2]) + "/" + FStr(PosVals[3]) + ")", strFunctionName);
                      _ConvertToFloat(PosVals[0],fltPos);
                      _ConvertToFloat(i_fltPositionX,fltPosShift);
                      MoveParameters.Add(fltPos+fltPosShift, P_XCOORD);
                      _ConvertToFloat(PosVals[1],fltPos);
                      _ConvertToFloat(i_fltPositionY,fltPosShift);
                      MoveParameters.Add(fltPos+fltPosShift, P_YCOORD);
                      _ConvertToFloat(PosVals[2],fltPos);
                      _ConvertToFloat(i_fltPositionZ,fltPosShift);
                      MoveParameters.Add(fltPos+fltPosShift, P_ZCOORD);
                      _ConvertToFloat(PosVals[3],fltPos);
                      _ConvertToFloat(i_fltPositionR,fltPosShift);
                      MoveParameters.Add(fltPos+fltPosShift, P_RZCOORD);
                      Decklayout5.MoveLabware(objLabware, MoveParameters);
                      //EnterSemaphore();
                      Instrument.GetLabwarePosition(i_strLabwareID, PosVals);
                      //LeaveSemaphore();
                      objLabware.ReleaseObject();
                      objDecklayout.ReleaseObject();
                      Decklayout5.ReleaseObject();
                      MoveParameters.ReleaseObject();
                      //StatusTrace(CMD_COMPLETE, TRACE_LEVEL_DEBUG, "New position:     (" + FStr(PosVals[0]) + "/" + FStr(PosVals[1]) + "/" + FStr(PosVals[2]) + "/" + FStr(PosVals[3]) + ")", strFunctionName);
                      //return(hslTrue);
                  }
                  else
                  {
                      //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find labware.", strFunctionName);
                      objDecklayout.ReleaseObject();
                      //return(hslFalse);
                  }
              }
              else
              {
                  //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find decklayout.", strFunctionName);
                  //return(hslFalse);
              }
              // runtime error handling
              HandleLabwareError :
              {
                  variable errorID;
                  errorID=err.GetId();
                  err.Clear();
                  if (errorID==-1574764487)
                  {
                      Trace("LabwareID is  unknown.");
                      //return(hslFalse);
                  }
                  else
                  {
                      //Trace("Unknown error occured.");
                      //return(hslFalse);
                  }
              }
          }
          //////////////////////////////////////////////////////////////////////////
          // private function ConvertToFloat
          //////////////////////////////////////////////////////////////////////////
    }
  }

  function ADJUST_TiltLabware( device & Instrument, sequence i_seq_LabwarePositionsToOffset, variable i_bool_ShiftToDeepestPoint, variable i_flt_TiltAngle, variable i_flt_XOffset, variable i_flt_ZOffset ) void {
    private variable flt_TiltAngleInRadian;
    private variable flt_X_Coord;
    private variable int_CutNum;
    private variable flt_X_Origin;
    private variable str_ContainerFilePath;
    private variable flt_NotUsed;
    private variable flt_Z_Coord;
    private variable flt_Y_Coord;
    private variable int_Length;
    private variable int_RowCount;
    private variable flt_ConversionFactor;
    private variable str_ConfigFilePath;
    private variable i;
    private variable flt_Sin;
    private variable flt_Cos;
    private variable flt_NewXOffset;
    private variable strFunctionName;
    private variable flt_ContainerWidth;
    private variable flt_NewZOffset;
    private variable bool_IncrementContainerDirection;
    private variable strFunctionName_Cut;
    private variable flt_ContainerBaseOffset;
    private variable str_LabID;
    private variable flt_Y_Origin;
    private variable flt_LabwareLength;
    private variable flt_CurrentXOffset;
    private variable flt_CurrentZOffset;
    private variable flt_Z_Radius;
    private variable int_ColumnCount;
    private variable flt_X_Shift;
    private variable bool_AlphaNumeric;
    private variable int_Count;
    private variable flt_Z_Origin;
    private variable bool_SequenceValid;
    private variable flt_NewZCoord;
    private variable str_PosID;
    private variable flt_X_Radius;
    private variable flt_NewXCoord;
    private variable flt_LabwareWidth;
    private variable int_TotalPositions;
    private variable int_Index;
    private sequence seq_Temp;
    private variable arr_UsedPosition[];
    private variable arr_XOffsetUsed[];
    private variable arr_ZOffsetUsed[];
    private variable int_UsedIndex;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_LabwarePositionsToOffset, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    _RemoveTruncatedSequencePositions(Instrument, i_seq_LabwarePositionsToOffset);
    if(0){
      int_TotalPositions = SeqGetTotal(i_seq_LabwarePositionsToOffset);
    }
    int_TotalPositions = SeqGetPositionCountForCurrLabware(i_seq_LabwarePositionsToOffset);
    if (LPQ::LABWARE_TILT::BOOL_LIBRARY_INITIALIZED == 0)
    {
      LPQ::InitializeVariables();
      LPQ::LABWARE_TILT::ARR_BASE_OFFSET.SetSize(0);
      LPQ::LABWARE_TILT::ARR_LABWARE_CONFIG_FILE.SetSize(0);
      LPQ::LABWARE_TILT::BOOL_LIBRARY_INITIALIZED = 1;
    }
    flt_ConversionFactor = 1.74532925199433E-02;
    flt_TiltAngleInRadian = i_flt_TiltAngle * flt_ConversionFactor;
    flt_Cos = MthCos(flt_TiltAngleInRadian);
    flt_Sin = MthSin(flt_TiltAngleInRadian);
    LABWARE_GetRowColumnNumber(Instrument, i_seq_LabwarePositionsToOffset, int_RowCount, int_ColumnCount, bool_AlphaNumeric, bool_IncrementContainerDirection);
    LABWARE_GetLabwareOrigin(Instrument, i_seq_LabwarePositionsToOffset, flt_X_Origin, flt_Y_Origin, flt_Z_Origin);
    LABWARE_GetLabwareLW(Instrument, i_seq_LabwarePositionsToOffset, flt_LabwareLength, flt_LabwareWidth);
    if (i_bool_ShiftToDeepestPoint == 1)
    {
      CONT_GetContainerWidth(Instrument, i_seq_LabwarePositionsToOffset, flt_ContainerWidth);
      flt_X_Shift = flt_ContainerWidth / (2 * 1.0);
      Trace("X Shift:  ",flt_X_Shift,"  Container Width:  ",flt_ContainerWidth);
    }
    else
    {
      flt_X_Shift = 0.0;
    }
    i_seq_LabwarePositionsToOffset.SetCurrentPosition(1);
    str_LabID = SeqGetLabwareId(i_seq_LabwarePositionsToOffset);
    str_PosID = SeqGetPositionId(i_seq_LabwarePositionsToOffset);
    SEQ_GetDefaultSequence(Instrument, str_LabID, 1, seq_Temp);
    LABWARE_GetContainerBaseOffset(Instrument, seq_Temp, flt_ContainerBaseOffset);
    LABWARE_GetConfigFile(Instrument, seq_Temp, str_ConfigFilePath);
    int_Index = _Lookup(LPQ::LABWARE_TILT::ARR_LABWARE_CONFIG_FILE, str_ConfigFilePath);
    if (int_Index == 0)
    {
      LPQ::LABWARE_TILT::ARR_BASE_OFFSET.AddAsLast(flt_ContainerBaseOffset);
      LPQ::LABWARE_TILT::ARR_LABWARE_CONFIG_FILE.AddAsLast(str_ConfigFilePath);
    }
    else
    {
      flt_ContainerBaseOffset=LPQ::LABWARE_TILT::ARR_BASE_OFFSET.GetAt(int_Index-1);
    }
    CONT_GetConfigFile(Instrument, i_seq_LabwarePositionsToOffset, str_ContainerFilePath);
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        i_seq_LabwarePositionsToOffset.SetCurrentPosition(i);
        str_LabID = SeqGetLabwareId(i_seq_LabwarePositionsToOffset);
        str_PosID = SeqGetPositionId(i_seq_LabwarePositionsToOffset);
        DevAddContainerToRack(Instrument, str_LabID, str_PosID, str_ContainerFilePath, 0.0, 0.0, flt_ContainerBaseOffset);
      }
    }
    arr_UsedPosition.SetSize(0);
    arr_XOffsetUsed.SetSize(0);
    arr_ZOffsetUsed.SetSize(0);
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        i_seq_LabwarePositionsToOffset.SetCurrentPosition(i);
        str_LabID = SeqGetLabwareId(i_seq_LabwarePositionsToOffset);
        str_PosID = SeqGetPositionId(i_seq_LabwarePositionsToOffset);
        DevGetLabwarePositionEx(Instrument, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_NotUsed);
        flt_CurrentXOffset = 0.0;
        flt_CurrentZOffset = 0.0;
        flt_NewXOffset = 0.0;
        flt_NewZOffset = 0.0;
        flt_NewXCoord = 0.0;
        flt_NewZCoord = 0.0;
        flt_X_Radius = 0.0;
        flt_Z_Radius = 0.0;
        if (i_flt_TiltAngle > 0)
        {
          flt_X_Radius = flt_X_Coord - flt_X_Origin + i_flt_XOffset - flt_X_Shift;
          flt_Z_Radius = flt_ContainerBaseOffset + i_flt_ZOffset;
          //Trace("X Radius:  ",flt_X_Radius);
          //Trace("X Shift:  ",flt_X_Shift);
          flt_NewXCoord = flt_X_Origin + (flt_X_Radius) * flt_Cos;
          flt_NewZCoord = flt_Z_Origin + flt_X_Radius * flt_Sin;
          //Trace("X Coord:  ",flt_X_Coord," New X:  ",flt_NewXCoord);
          //Trace("Z Coord:  ",flt_Z_Coord," New Z:  ",flt_NewZCoord);
          flt_NewXOffset = flt_NewXCoord - flt_X_Coord + i_flt_XOffset;
          flt_NewZOffset = flt_NewZCoord - flt_Z_Coord + flt_ContainerBaseOffset + i_flt_ZOffset + (flt_Z_Coord - flt_Z_Origin);
        }
        else
        {
          flt_NewXOffset = 0.0;
          flt_NewZOffset = flt_ContainerBaseOffset + i_flt_ZOffset;
        }
        CONT_GetConfigFile(Instrument, i_seq_LabwarePositionsToOffset, str_ContainerFilePath);
        int_UsedIndex = _Lookup(arr_UsedPosition, str_PosID);
        flt_NewXOffset = MthRound(flt_NewXOffset, 1);
        flt_NewZOffset = MthRound(flt_NewZOffset, 1);
        if (int_UsedIndex == 0)
        {
          arr_UsedPosition.AddAsLast(str_PosID);
          arr_XOffsetUsed.AddAsLast(flt_NewXOffset);
          arr_ZOffsetUsed.AddAsLast(flt_NewZOffset);
        }
        else
        {
          flt_NewXOffset=arr_XOffsetUsed.GetAt(int_UsedIndex-1);
          flt_NewZOffset=arr_ZOffsetUsed.GetAt(int_UsedIndex-1);
        }
        Trace("Lab ID:  ",str_LabID," Pos ID:  ",str_PosID," X Offset:  ",flt_NewXOffset,"  Z Offset:  ",flt_NewZOffset);
        DevAddContainerToRack(Instrument, str_LabID, str_PosID, str_ContainerFilePath, flt_NewXOffset, 0.0, flt_NewZOffset);
      }
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function CONT_GetBaseMeasurement( device & Instrument, sequence & i_seq_Labware, variable & o_flt_ContainerBaseThickness, variable & o_flt_ContainerBaseOffset ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable bool_SequenceValid;
    private variable str_PosID;
    o_flt_ContainerBaseThickness = 0;
    o_flt_ContainerBaseOffset = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_flt_ContainerBaseThickness = 0.0;
    o_flt_ContainerBaseOffset = 0.0;
    {
      object rack;
      object rack2;
      object ctr;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = Instrument.GetDeckLayoutObject();
      //labwareId = SeqGetLabwareId(i_sequenceLabware);
      labware = m_decklayout.Labware(str_LabID);
      labware.GetObject2("{3E5213CF-57C9-4911-B33E-05E77130E4DB}", rack); //  IEditLabware6
      labware.GetObject("IRectRack2", rack2); //  IEditLabware6
      rack.CntrAtPosition(ctr,str_PosID);
      o_flt_ContainerBaseThickness = ctr.ContainerBaseDepth;
      o_flt_ContainerBaseOffset = rack2.ContainerBaseOffset(str_PosID);
      rack.ReleaseObject();
      rack2.ReleaseObject();
      ctr.ReleaseObject();
      labware.ReleaseObject();
      m_decklayout.ReleaseObject();
    }
    o_flt_ContainerBaseThickness = MthRound(o_flt_ContainerBaseThickness, 1);
    o_flt_ContainerBaseOffset = MthRound(o_flt_ContainerBaseOffset, 1);
  }

  function CONT_GetConfigFile( device & Instrument, sequence i_seq_Labware, variable & o_str_ContainerFileName ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_PosID;
    private variable bool_SequenceValid;
    o_str_ContainerFileName = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_str_ContainerFileName = Translate("");
    {
      object rack;
      object ctr;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = Instrument.GetDeckLayoutObject();
      labware = m_decklayout.Labware(str_LabID);
      labware.GetObject2("{3E5213CF-57C9-4911-B33E-05E77130E4DB}", rack); //  IEditLabware6
      rack.CntrAtPosition(ctr,str_PosID);
      o_str_ContainerFileName = ctr.FileName;
      rack.ReleaseObject();
      ctr.ReleaseObject();
      labware.ReleaseObject();
      m_decklayout.ReleaseObject();
    }
  }

  function CONT_GetContainerBaseThickness( device & Instrument, sequence i_seq_Labware, variable & o_containerBaseThickness ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable bool_SequenceValid;
    private variable str_PosID;
    o_containerBaseThickness = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_containerBaseThickness = 0;
    {
      object rack;
      object ctr;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = Instrument.GetDeckLayoutObject();
      //labwareId = SeqGetLabwareId(i_sequenceLabware);
      labware = m_decklayout.Labware(str_LabID);
      labware.GetObject2("{3E5213CF-57C9-4911-B33E-05E77130E4DB}", rack); //  IEditLabware6
      rack.CntrAtPosition(ctr,str_PosID);
      o_containerBaseThickness = ctr.ContainerBaseDepth;
      rack.ReleaseObject();
      ctr.ReleaseObject();
      labware.ReleaseObject();
      m_decklayout.ReleaseObject();
    }
    o_containerBaseThickness = MthRound(o_containerBaseThickness, 1);
  }

  function CONT_GetContainerDepth( device & Instrument, sequence i_seq_Labware, variable i_bool_UseDeckCoordinates, variable & o_ContainerDepth, variable & o_ContainerClearanceHeight ) void {
    private variable flt_Z_Bottom;
    private variable flt_NotUsed;
    private variable strFunctionName;
    private variable str_LabID;
    private variable bool_SequenceValid;
    private variable str_PosID;
    o_ContainerDepth = 0;
    o_ContainerClearanceHeight = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_ContainerDepth = 0;
    o_ContainerClearanceHeight = 0.0;
    DevGetLabwarePositionEx(Instrument, str_LabID, str_PosID, flt_NotUsed, flt_NotUsed, flt_Z_Bottom, flt_NotUsed);
    {
      object rack;
      object ctr;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = Instrument.GetDeckLayoutObject();
      //labwareId = SeqGetLabwareId(i_sequenceLabware);
      labware = m_decklayout.Labware(str_LabID);
      labware.GetObject2("{3E5213CF-57C9-4911-B33E-05E77130E4DB}", rack); //  IEditLabware6
      rack.CntrAtPosition(ctr,str_PosID);
      o_ContainerDepth = ctr.Depth;
      o_ContainerClearanceHeight = ctr.Clearance;
      rack.ReleaseObject();
      ctr.ReleaseObject();
      labware.ReleaseObject();
      m_decklayout.ReleaseObject();
    }
    o_ContainerClearanceHeight = MthRound(o_ContainerClearanceHeight, 1);
    o_ContainerDepth = MthRound(o_ContainerDepth, 1);
    if (i_bool_UseDeckCoordinates == 1)
    {
      o_ContainerClearanceHeight = o_ContainerClearanceHeight + flt_Z_Bottom;
      o_ContainerDepth = o_ContainerDepth + flt_Z_Bottom;
    }
  }

  function CONT_GetContainerWidth( device & Instrument, sequence i_seq_Labware, variable & o_flt_ContainerWidth ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable flt_ContainerDiameter;
    private variable str_PosID;
    private variable bool_SequenceValid;
    o_flt_ContainerWidth = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    flt_ContainerDiameter = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      flt_ContainerDiameter = objEditLabware5.CntrDiameter(str_PosID);
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_flt_ContainerWidth = flt_ContainerDiameter;
  }

  function FILE_GetDefinitionFileValue( variable & i_str_ConfigFilePath, variable i_str_ValueToSearch, variable & o_str_Value ) variable {
    private variable str_DataDefinition;
    private variable strFunctionName;
    private variable bool_FileExists;
    private variable str_Instance;
    private variable bool_ReturnValue;
    private variable str_Extension;
    o_str_Value = 0;
    o_str_Value = Translate("");
    bool_ReturnValue = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_FileExists = HSLExtensions::File::Exists(i_str_ConfigFilePath);
    if (bool_FileExists == 0)
    {
      Trace(i_str_ConfigFilePath," - File doesn't exist!");
      return (bool_ReturnValue);
    }
    i_str_ValueToSearch = StrConcat2(i_str_ValueToSearch, Translate(""));
    str_Extension = HSLExtensions::File::GetFileExtension(i_str_ConfigFilePath);
    str_DataDefinition = Translate("");
    str_Instance = Translate("");
    if (str_Extension == "rck")
    {
      str_DataDefinition = Translate("RECTRACK");
      str_Instance = Translate("default");
    }
    if (str_Extension == "ctr")
    {
      str_DataDefinition = Translate("CONTAINER");
      str_Instance = Translate("default");
    }
    if (str_Extension == "tml")
    {
      str_DataDefinition = Translate("TEMPLATE");
      str_Instance = Translate("default");
    }
    if (str_Extension == "lid")
    {
      str_DataDefinition = Translate("COVER");
      str_Instance = Translate("default");
    }
    if (str_Extension == "lay")
    {
      str_DataDefinition = Translate("DECKLAY");
      str_Instance = Translate("ML_STAR");
    }
    if (str_Extension == "dck")
    {
      str_DataDefinition = Translate("DECK");
      str_Instance = Translate("0");
    }
    if (str_Extension == "tpl")
    {
      str_DataDefinition = Translate("DECKLAY");
      str_Instance = Translate("default");
    }
    if(0){
      Trace("Data definition:  ",str_DataDefinition);
    }
    if (str_DataDefinition != "")
    {
      {
           object objCfgFile;
           objCfgFile.CreateObject("HXCFGFILLIB.HxCfgFile");
           objCfgFile.LoadFile(i_str_ConfigFilePath);
           onerror goto HandleError;
           if(objCfgFile.ExistDataDef(str_DataDefinition,str_Instance) == 1)
           {
                //o_str_Value = objCfgFile.GetDataDefValueAsString(str_DataDefinition,"default",i_str_ValueToSearch);
                objCfgFile.LookupDataDefValueAsString(str_DataDefinition,str_Instance,i_str_ValueToSearch,o_str_Value);
           }
           onerror goto 0;
           err.Clear();
           objCfgFile.ReleaseObject();
           HandleError:
           {
             objCfgFile.ReleaseObject();
           }
      }
      if (o_str_Value != "")
      {
        bool_ReturnValue = 1;
      }
      else
      {
        bool_ReturnValue = 0;
      }
    }
    else
    {
      Trace("File type:  ",str_Extension," unknown!");
      bool_ReturnValue = 0;
    }
    if(0){
      if (bool_ReturnValue == 0)
      {
        if (str_Extension == "lay")
        {
          str_Instance = Translate("default");
          {
               object objCfgFile;
               objCfgFile.CreateObject("HXCFGFILLIB.HxCfgFile");
               objCfgFile.LoadFile(i_str_ConfigFilePath);
               onerror goto HandleError2;
               if(objCfgFile.ExistDataDef(str_DataDefinition,str_Instance) == 1)
               {
                    //o_str_Value = objCfgFile.GetDataDefValueAsString(str_DataDefinition,"default",i_str_ValueToSearch);
                    objCfgFile.LookupDataDefValueAsString(str_DataDefinition,str_Instance,i_str_ValueToSearch,o_str_Value);
               }
               onerror goto 0;
               err.Clear();
               objCfgFile.ReleaseObject();
               HandleError2:
               {
                 objCfgFile.ReleaseObject();
               }
          }
          if (o_str_Value != "")
          {
            bool_ReturnValue = 1;
          }
          else
          {
            bool_ReturnValue = 0;
          }
        }
      }
    }
    return (bool_ReturnValue);
  }

  function LABWARE_GetCarrierAndSiteID( device & Instrument, sequence i_seq_Labware, variable & o_str_TemplateID, variable & o_str_TemplateSiteID ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_PosID;
    private variable bool_SequenceValid;
    o_str_TemplateID = 0;
    o_str_TemplateSiteID = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_str_TemplateID = Translate("");
    o_str_TemplateSiteID = Translate("");
    {
        object obj_Decklayout;
        obj_Decklayout = Instrument.GetDeckLayoutObject();
        if (!obj_Decklayout.IsNull())
            {
                  object EditDecklayout5;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  variable Array_Keys[];
                  variable intCounter;
                  obj_Decklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  obj_Decklayout.TemplateLabwareNames(LabwareObjects);
                  Array_Keys = LabwareObjects.GetKeys();
                  for(intCounter=1; intCounter<=Array_Keys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      if(LabwareNames.Item1("Labwr_Id") == str_LabID)
                      {
                          o_str_TemplateSiteID = LabwareNames.Item1("Labwr_DkSiteId");
                          o_str_TemplateID = LabwareNames.Item1("Labwr_TemplateId");
                      }
                  }
                  obj_Decklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  Parameter.ReleaseObject();
                  LabwareObjects.ReleaseObject();
                  LabwareNames.ReleaseObject();
           }
    }
  }

  function LABWARE_GetCarrierTracks( device & Instrument, sequence i_seq_Labware, variable & o_int_TotalTracks, variable & o_int_LeftMostTrack, variable & o_int_RightMostTrack ) void {
    private variable flt_X_Coord;
    private variable flt_Z_Coord;
    private variable flt_Y_Coord;
    private variable strFunctionName;
    private variable str_TemplateID;
    private variable str_LabID;
    private variable flt_LabwareLength;
    private variable str_ConfigFile;
    private variable int_NumberOfTracks;
    private variable str_Extension;
    private variable str_TemplateSiteID;
    private variable str_PosID;
    private variable bool_SequenceValid;
    private variable flt_LabwareWidth;
    o_int_TotalTracks = 0;
    o_int_LeftMostTrack = 0;
    o_int_RightMostTrack = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_int_LeftMostTrack = 0;
    o_int_RightMostTrack = 0;
    o_int_TotalTracks = 0;
    LABWARE_GetCarrierAndSiteID(Instrument, i_seq_Labware, str_TemplateID, str_TemplateSiteID);
    LABWARE_GetConfigFile(Instrument, i_seq_Labware, str_ConfigFile);
    str_Extension = HSLExtensions::File::GetFileExtension(str_ConfigFile);
    if (str_Extension == "rck")
    {
      if (str_TemplateID == "default")
      {
        LABWARE_GetLabwareLW(Instrument, i_seq_Labware, flt_LabwareLength, flt_LabwareWidth);
        o_int_TotalTracks = flt_LabwareWidth / 22.5;
        _ConvertToInteger(o_int_TotalTracks, o_int_TotalTracks);
        LABWARE_GetLabwareOrigin(Instrument, i_seq_Labware, flt_X_Coord, flt_Y_Coord, flt_Z_Coord);
        flt_X_Coord = flt_X_Coord - 77.5;
        o_int_LeftMostTrack = flt_X_Coord / (22.5 * 1.0);
        _ConvertToInteger(o_int_LeftMostTrack, o_int_LeftMostTrack);
        o_int_RightMostTrack = o_int_LeftMostTrack + o_int_TotalTracks;
        _ConvertToInteger(o_int_RightMostTrack, o_int_RightMostTrack);
        o_int_RightMostTrack = o_int_RightMostTrack - 1;
      }
      else
      {
        int_NumberOfTracks = DevGetLabwareData(Instrument, str_TemplateID, Translate("MlStarCarWidthAsT"));
        Trace("Number of tracks:  ",int_NumberOfTracks);
        if (int_NumberOfTracks != "")
        {
          _ConvertToInteger(int_NumberOfTracks, o_int_TotalTracks);
          TEMPLATE_GetTemplateOrigin(Instrument, i_seq_Labware, flt_X_Coord, flt_Y_Coord, flt_Z_Coord);
          flt_X_Coord = flt_X_Coord - 77.5;
          o_int_LeftMostTrack = flt_X_Coord / (22.5 * 1.0);
          _ConvertToInteger(o_int_LeftMostTrack, o_int_LeftMostTrack);
          o_int_RightMostTrack = o_int_LeftMostTrack + o_int_TotalTracks;
          _ConvertToInteger(o_int_RightMostTrack, o_int_RightMostTrack);
          o_int_RightMostTrack = o_int_RightMostTrack - 1;
        }
      }
    }
    else
    {
      int_NumberOfTracks = DevGetLabwareData(Instrument, str_TemplateID, Translate("MlStarCarWidthAsT"));
      Trace("Number of tracks:  ",int_NumberOfTracks);
      if (int_NumberOfTracks != "")
      {
        _ConvertToInteger(int_NumberOfTracks, o_int_TotalTracks);
        TEMPLATE_GetTemplateOrigin(Instrument, i_seq_Labware, flt_X_Coord, flt_Y_Coord, flt_Z_Coord);
        flt_X_Coord = flt_X_Coord - 77.5;
        o_int_LeftMostTrack = flt_X_Coord / (22.5 * 1.0);
        _ConvertToInteger(o_int_LeftMostTrack, o_int_LeftMostTrack);
        o_int_RightMostTrack = o_int_LeftMostTrack + o_int_TotalTracks;
        _ConvertToInteger(o_int_RightMostTrack, o_int_RightMostTrack);
        o_int_RightMostTrack = o_int_RightMostTrack - 1;
      }
    }
  }

  function LABWARE_GetConfigFile( device & Instrument, sequence i_seq_Labware, variable & o_str_ConfigFilePath ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable bool_SequenceValid;
    private variable str_PosID;
    o_str_ConfigFilePath = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_str_ConfigFilePath = Translate("");
    //Get Config File
    {
         object objDeckLayout;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              object objLabware;
              onerror goto HandleLabwareError;
              objLabware = objDeckLayout.Labware(str_LabID);
              onerror goto 0;
              err.Clear();
              if(!objLabware.IsNull())
              {
                   object objEditLabware5;
                   objLabware.GetObject("IEditLabware5", objEditLabware5);
                  o_str_ConfigFilePath = objEditLabware5.Filename;
                   objEditLabware5.ReleaseObject();
                   objDeckLayout.ReleaseObject();
                   objLabware.ReleaseObject();
              }
         }
               // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
                 if(errorID != 0)
                 {
                      if (errorID==-1574764487)
                      {
                            Trace("LabwareID is  unknown.");
                      }
                      else
                      {
                            Trace("Unknown error occured.");
                      }
                 }
            }
    }
  }

  function LABWARE_GetContainerBaseOffset( device & Instrument, sequence i_seq_Labware, variable & o_flt_ContainerBaseOffset ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_PosID;
    private variable bool_SequenceValid;
    private variable str_ConfigFilePath;
    private variable str_Return;
    o_flt_ContainerBaseOffset = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_flt_ContainerBaseOffset = 0;
    LABWARE_GetConfigFile(Instrument, i_seq_Labware, str_ConfigFilePath);
    FILE_GetDefinitionFileValue(str_ConfigFilePath, Translate("Cntr.1.base"), str_Return);
    _ConvertToFloat(str_Return, o_flt_ContainerBaseOffset);
    if(0){
      {
        object rack;
        object labware;
        object m_decklayout;
        variable labwareId;
        m_decklayout = Instrument.GetDeckLayoutObject();
        //labwareId = SeqGetLabwareId(i_sequenceLabware);
        labware = m_decklayout.Labware(str_LabID);
        labware.GetObject("IRectRack2", rack); //  IEditLabware6
        o_flt_ContainerBaseOffset = rack.ContainerBaseOffset(str_PosID);
        rack.ReleaseObject();
        labware.ReleaseObject();
        m_decklayout.ReleaseObject();
      }
    }
    o_flt_ContainerBaseOffset = MthRound(o_flt_ContainerBaseOffset, 1);
  }

  function LABWARE_GetCurrentPosition( device & Instrument, sequence i_seq_Labware, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void {
    private variable flt_NotUsed;
    private variable strFunctionName;
    private variable str_LabID;
    private variable bool_SequenceValid;
    private variable str_PosID;
    o_flt_X_Coord = 0;
    o_flt_Y_Coord = 0;
    o_flt_Z_Coord = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_flt_X_Coord = 0.0;
    o_flt_Y_Coord = 0.0;
    o_flt_Z_Coord = 0.0;
    DevGetLabwarePositionEx(Instrument, str_LabID, str_PosID, o_flt_X_Coord, o_flt_Y_Coord, o_flt_Z_Coord, flt_NotUsed);
  }

  function LABWARE_GetDescription( device & Instrument, sequence i_seq_Labware, variable & o_str_LabwareDescription ) void {
    private variable str_ReturnValue;
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_ConfigFile;
    private variable bool_SequenceValid;
    private variable str_PosID;
    o_str_LabwareDescription = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    LABWARE_GetConfigFile(Instrument, i_seq_Labware, str_ConfigFile);
    o_str_LabwareDescription = Translate("");
    FILE_GetDefinitionFileValue(str_ConfigFile, Translate("Description"), str_ReturnValue);
    o_str_LabwareDescription = StrConcat2(str_ReturnValue, Translate(""));
  }

  function LABWARE_GetFirstPosition( device & Instrument, variable i_str_LabID, variable & o_str_PosID ) void {
    private variable int_Increment;
    private variable str_ErrorDescription;
    private variable strFunctionName;
    private variable bool_LabwareNotValid;
    private variable int_TotalColumns;
    private variable int_Index;
    private variable int_TotalRows;
    o_str_PosID = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_TotalRows = 0;
    int_TotalColumns = 0;
    int_Index = 0;
    int_Increment = 0;
    bool_LabwareNotValid = DevIsValidLabwareForCurrentDeckLayout(Instrument, i_str_LabID);
    if (bool_LabwareNotValid == 0)
    {
      str_ErrorDescription = StrConcat8(Translate(""), Translate(""), Translate("Labware ID: '"), i_str_LabID, Translate("' is not known on the deck layout"), Translate(""), Translate(""), Translate(""));
      _FunctionError(strFunctionName, str_ErrorDescription);
    }
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      int_TotalRows = objRack4.Rows();
      int_TotalColumns = objRack4.Columns();
      int_Index = objRack4.Index();
      int_Increment = objRack4.Increment();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    if (int_Index == 1)
    {
      ANC::Convert_Numbers_to_Alpha_Numeric(int_Increment, 1, int_TotalRows, int_TotalColumns, o_str_PosID);
    }
    else
    {
      o_str_PosID = StrConcat2(1, Translate(""));
    }
  }

  function LABWARE_GetLabwareLW( device & Instrument, sequence i_seq_Labware, variable & o_flt_Labware_L, variable & o_flt_Labware_W ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable bool_SequenceValid;
    private variable str_PosID;
    o_flt_Labware_L = 0;
    o_flt_Labware_W = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_flt_Labware_W = 0.0;
    o_flt_Labware_L = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      o_flt_Labware_W = objRackDataParams.Item1("Labwr_XDim");
      o_flt_Labware_L = objRackDataParams.Item1("Labwr_YDim");
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
  }

  function LABWARE_GetLabwareOrigin( device & Instrument, sequence i_seq_Labware, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void {
    private variable strFunctionName;
    private variable flt_RackBase;
    private variable str_LabID;
    private variable flt_BoundaryX;
    private variable flt_BoundaryY;
    private variable bool_SequenceValid;
    private variable str_PosID;
    private variable flt_RackWidthX;
    private variable flt_RackWidthY;
    o_flt_X_Coord = 0;
    o_flt_Y_Coord = 0;
    o_flt_Z_Coord = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_flt_X_Coord = 0.0;
    o_flt_Y_Coord = 0.0;
    o_flt_Z_Coord = 0.0;
    flt_BoundaryX = 0.0;
    flt_BoundaryY = 0.0;
    flt_RackWidthX = 0.0;
    flt_RackWidthY = 0.0;
    flt_RackBase = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      flt_BoundaryX = objRackDataParams.Item1("Labwr_Bndry1X");
      flt_BoundaryY = objRackDataParams.Item1("Labwr_Bndry1Y");
      flt_RackWidthX = objRackDataParams.Item1("Labwr_XDim");
      flt_RackWidthY = objRackDataParams.Item1("Labwr_YDim");
      flt_RackBase = objRack4.RackBase();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_flt_X_Coord = flt_BoundaryX;
    o_flt_Y_Coord = flt_BoundaryY;
    o_flt_Z_Coord = flt_RackBase;
    o_flt_Z_Coord = MthRound(o_flt_Z_Coord, 1);
  }

  function LABWARE_GetLabwareStackHeight( device & Instrument, sequence i_seq_Labware, variable & o_flt_LabwareStackHeight ) void {
    private variable str_ReturnValue;
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_ConfigFile;
    private variable bool_SequenceValid;
    private variable str_PosID;
    o_flt_LabwareStackHeight = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_flt_LabwareStackHeight = 0.0;
    LABWARE_GetConfigFile(Instrument, i_seq_Labware, str_ConfigFile);
    if(0){
      Trace("Config File:  ",str_ConfigFile);
    }
    if(0){
      {
           object objCfgFile;
           objCfgFile.CreateObject("HXCFGFILLIB.HxCfgFile");
           objCfgFile.LoadFile(str_ConfigFile);
           onerror goto HandleError;
           o_flt_LabwareStackHeight = objCfgFile.GetDataDefValueAsString("RECTRACK","default","StackHt");
           onerror goto 0;
           err.Clear();
           objCfgFile.ReleaseObject();
           HandleError:
           {
             objCfgFile.ReleaseObject();
           }
      }
    }
    FILE_GetDefinitionFileValue(str_ConfigFile, Translate("StackHt"), str_ReturnValue);
    _ConvertToFloat(str_ReturnValue, o_flt_LabwareStackHeight);
  }

  function LABWARE_GetLabwareViewName( device & Instrument, sequence i_seq_Labware, variable & o_str_LabwareViewName ) void {
    private variable str_ReturnValue;
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_ConfigFile;
    private variable str_PosID;
    private variable bool_SequenceValid;
    o_str_LabwareViewName = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    LABWARE_GetConfigFile(Instrument, i_seq_Labware, str_ConfigFile);
    o_str_LabwareViewName = Translate("");
    if(0){
      {
           object objEditLabware;
           object objDeckLayout;
           object objLabware;
           objDeckLayout = Instrument.GetDeckLayoutObject();
           if(!objDeckLayout.IsNull())
           {
                objLabware = objDeckLayout.Labware(str_LabID);
                if(!objLabware.IsNull())
                {
                     objLabware.GetObject("IEditLabware6", objEditLabware);
                     o_str_LabwareViewName = objEditLabware.DisplayName;
                }
           }
           objEditLabware.ReleaseObject();
           objDeckLayout.ReleaseObject();
           objLabware.ReleaseObject();
      }
    }
    FILE_GetDefinitionFileValue(str_ConfigFile, Translate("ViewName"), str_ReturnValue);
    o_str_LabwareViewName = StrConcat2(str_ReturnValue, Translate(""));
  }

  function LABWARE_GetRackHeight( device & Instrument, sequence i_seq_Labware, variable i_bool_UseDeckCoordinates, variable & o_flt_RackHeight, variable & o_flt_RackClearanceHeight ) void {
    private variable flt_NotUsed;
    private variable flt_RackHeight;
    private variable flt_ZBottom;
    private variable flt_RackBase;
    private variable strFunctionName;
    private variable str_LabID;
    private variable bool_SequenceValid;
    private variable str_PosID;
    private variable str_ConfigFile;
    private variable bln_ValueFound;
    private variable str_Value;
    o_flt_RackHeight = 0;
    o_flt_RackClearanceHeight = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_flt_RackClearanceHeight = 0.0;
    o_flt_RackHeight = 0.0;
    flt_RackBase = 0.0;
    flt_RackHeight = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      flt_RackHeight = objRackDataParams.Item1("Labwr_ZDim");
      //o_flt_RackClearanceHeight = objEditLabware5.Clearance(str_PosID);
      flt_RackBase = objRack4.RackBase();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_flt_RackHeight = flt_RackBase + flt_RackHeight;
    LABWARE_GetConfigFile(Instrument, i_seq_Labware, str_ConfigFile);
    bln_ValueFound = FILE_GetDefinitionFileValue(str_ConfigFile, Translate("Clearance"), str_Value);
    if (bln_ValueFound == 0)
    {
      o_flt_RackClearanceHeight = o_flt_RackHeight;
    }
    else
    {
      o_flt_RackClearanceHeight = StrFVal(str_Value);
    }
    if(0){
      DevGetLabwarePositionEx(Instrument, str_LabID, str_PosID, flt_NotUsed, flt_NotUsed, flt_ZBottom, flt_NotUsed);
    }
    LABWARE_GetLabwareOrigin(Instrument, i_seq_Labware, flt_NotUsed, flt_NotUsed, flt_ZBottom);
    if (i_bool_UseDeckCoordinates == 0)
    {
      o_flt_RackHeight = o_flt_RackHeight - flt_ZBottom;
    }
    else
    {
      o_flt_RackClearanceHeight = o_flt_RackClearanceHeight + flt_ZBottom;
    }
  }

  function LABWARE_GetRowColumnNumber( device & Instrument, sequence i_seq_Labware, variable & o_int_RowCount, variable & o_int_ColumnCount, variable & o_bool_AlphaNumeric, variable & o_bool_IncrementContainer ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable bool_SequenceValid;
    private variable str_PosID;
    o_int_RowCount = 0;
    o_int_ColumnCount = 0;
    o_bool_AlphaNumeric = 0;
    o_bool_IncrementContainer = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_bool_AlphaNumeric = 0;
    o_int_ColumnCount = 0;
    o_int_RowCount = 0;
    o_bool_IncrementContainer = 0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      o_int_RowCount = objRack4.Rows();
      o_int_ColumnCount = objRack4.Columns();
      o_bool_AlphaNumeric = objRack4.Index();
      o_bool_IncrementContainer = objRack4.Increment();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
  }

  function LABWARE_GetVisibility( device & Instrument, sequence i_seq_Labware, variable & o_bool_LabwareVisibility ) void {
    private variable int_LabwareVisibility;
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_PosID;
    private variable bool_SequenceValid;
    o_bool_LabwareVisibility = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    int_LabwareVisibility = 0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware6", objEditLabware5);
      int_LabwareVisibility = objEditLabware5.Visible();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_bool_LabwareVisibility = int_LabwareVisibility;
    if (o_bool_LabwareVisibility == 0)
    {
      o_bool_LabwareVisibility = hslFalse;
    }
    else
    {
      o_bool_LabwareVisibility = hslTrue;
    }
  }

  function LABWARE_IsContainersConnected( device & Instrument, sequence i_seq_Labware, variable & o_bool_ConnectedContainer ) void {
    private variable strFunctionName;
    private variable str_LabID;
    private variable bool_SequenceValid;
    private variable str_PosID;
    o_bool_ConnectedContainer = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_bool_ConnectedContainer = 0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      //objRack4.GetRackData(objRackDataParams);
      //bool_ConectedCarrier = objRackDataParams.Item1("ConnectedCtr");
      o_bool_ConnectedContainer = objRack4.ConnectedCtr();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    if (o_bool_ConnectedContainer == 1)
    {
      o_bool_ConnectedContainer = hslTrue;
    }
    else
    {
      o_bool_ConnectedContainer = hslFalse;
    }
  }

  function SEQ_GetDefaultSequence( device & Instrument, variable i_str_LabID, variable i_bool_SortByColumn, sequence & o_seq_DefaultSequence ) void {
    private variable int_Increment;
    private variable str_ErrorDescription;
    private variable i;
    private variable strFunctionName;
    private variable bool_LabwareNotValid;
    private variable int_TotalColumns;
    private variable str_PosID;
    private variable int_TotalRows;
    private variable int_TotalPositions;
    private variable int_Index;
    private variable str_ConfigFilePath;
    private variable str_HoleCount;
    private variable str_DataType;
    private variable bool_ValueFound;
    private variable str_Value;
    private variable int_StartingPosition;
    private variable int_CurrentPosition;
    { sequence __temp; o_seq_DefaultSequence = __temp; }
    SeqRemoveAll(o_seq_DefaultSequence);
    int_TotalRows = 0;
    int_TotalColumns = 0;
    int_Index = 0;
    int_Increment = 0;
    bool_LabwareNotValid = DevIsValidLabwareForCurrentDeckLayout(Instrument, i_str_LabID);
    if (bool_LabwareNotValid == 0)
    {
      str_ErrorDescription = StrConcat8(Translate(""), Translate(""), Translate("Labware ID: '"), i_str_LabID, Translate("' is not known on the deck layout"), Translate(""), Translate(""), Translate(""));
      _FunctionError(strFunctionName, str_ErrorDescription);
    }
    str_ConfigFilePath = Translate("");
    //Get Config File
    {
         object objDeckLayout;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              object objLabware;
              onerror goto HandleLabwareError;
              objLabware = objDeckLayout.Labware(i_str_LabID);
              onerror goto 0;
              err.Clear();
              if(!objLabware.IsNull())
              {
                   object objEditLabware5;
                   objLabware.GetObject("IEditLabware5", objEditLabware5);
                  str_ConfigFilePath = objEditLabware5.Filename;
                   objEditLabware5.ReleaseObject();
                   objDeckLayout.ReleaseObject();
                   objLabware.ReleaseObject();
              }
         }
               // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
                 if(errorID != 0)
                 {
                      if (errorID==-1574764487)
                      {
                            Trace("LabwareID is  unknown.");
                      }
                      else
                      {
                            Trace("Unknown error occured.");
                      }
                 }
            }
    }
    FILE_GetDefinitionFileValue(str_ConfigFilePath, Translate("DataType"), str_DataType);
    if (str_DataType == "3")
    {
      FILE_GetDefinitionFileValue(str_ConfigFilePath, Translate("DataType"), str_DataType);
      FILE_GetDefinitionFileValue(str_ConfigFilePath, Translate("HoleCnt"), str_HoleCount);
      int_TotalPositions = StrIVal(str_HoleCount);
    }
    else
    {
      {
        object objRackDataParams;
        object objDecklayout;
        object objLabware;
        object objTemplate;
        object objRack;
        object objRack4;
        object objEditLabware5;
        objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
        objDecklayout = Instrument.GetDeckLayoutObject();
        objLabware = objDecklayout.Labware(i_str_LabID);
        objLabware.GetObject("ITemplateDeckData", objTemplate);
        objLabware.GetObject("IRectRack4", objRack4);
        objLabware.GetObject("IRectRack", objRack);
        objLabware.GetObject("IEditLabware5", objEditLabware5);
        objRack4.GetRackData(objRackDataParams);
        int_TotalRows = objRack4.Rows();
        int_TotalColumns = objRack4.Columns();
        int_Index = objRack4.Index();
        int_Increment = objRack4.Increment();
        objRackDataParams.ReleaseObject();
        objDecklayout.ReleaseObject();
        objLabware.ReleaseObject();
        objTemplate.ReleaseObject();
        objRack.ReleaseObject();
        objRack4.ReleaseObject();
        objEditLabware5.ReleaseObject();
      }
      int_TotalPositions = int_TotalColumns * int_TotalRows;
    }
    bool_ValueFound = FILE_GetDefinitionFileValue(str_ConfigFilePath, Translate("IX.First"), str_Value);
    if (bool_ValueFound == 1)
    {
      int_StartingPosition = StrIVal(str_Value);
      int_StartingPosition = int_StartingPosition - 1;
    }
    else
    {
      int_StartingPosition = 0;
    }
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        if (int_Index == 1)
        {
          ANC::Convert_Numbers_to_Alpha_Numeric(i_bool_SortByColumn, i, int_TotalRows, int_TotalColumns, str_PosID);
        }
        else
        {
          int_CurrentPosition = int_StartingPosition + i;
          str_PosID = StrConcat2(int_CurrentPosition, Translate(""));
        }
        SeqAdd(o_seq_DefaultSequence, i_str_LabID, str_PosID);
      }
    }
    o_seq_DefaultSequence.SetCurrentPosition(1);
  }

  private function SEQ_GetDefaultSequenceForLabware( device & Instrument, variable i_str_LabwareID, sequence & o_seq_DefaultSequence ) void {
    private variable int_Return;
    { sequence __temp; o_seq_DefaultSequence = __temp; }
    SeqRemoveAll(o_seq_DefaultSequence);
    int_Return = 0;
    {
         object objDeckLayout;
         object objLabware;
         object objEditLabware6;
         object objSequence;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         //objSequence = objDeckLayout.GetObject(o_seq_DefaultSequence);
         if(!objDeckLayout.IsNull())
         {
              objLabware = objDeckLayout.Labware(i_str_LabwareID);
              if(!objLabware.IsNull())
              {
                   objLabware.GetObject("IEditLabware6", objEditLabware6);
                   objEditLabware6.DefaultSequence(objSequence);
                   //int_Return = objEditLabware6.DefaultSequenceEdited();
                   //int_Return = objEditLabware6.DefaultSequenceValid();
              }
         }
         objDeckLayout.ReleaseObject();
         objEditLabware6.ReleaseObject();
         objLabware.ReleaseObject();
    }
    //Trace("Return:  ",int_Return);
  }

  function SEQ_ReloadSequence( device & Instrument, sequence & io_seq_SequenceToReload ) void {
    private variable str_SequenceName;
    str_SequenceName = SeqGetName(io_seq_SequenceToReload);
    {
         object objDeckLayout;
         object objEditDeckLayout8;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              objDeckLayout.GetObject("IEditDeckLayout8", objEditDeckLayout8);
              objEditDeckLayout8.ReloadSequence(str_SequenceName);
         }
         objDeckLayout.ReleaseObject();
         objEditDeckLayout8.ReleaseObject();
    }
  }

  function TEMPLATE_GetConfigFile( device & Instrument, sequence i_seq_Labware, variable & o_str_ConfigFilePath ) void {
    private variable str_TemplateSite;
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_Template;
    private variable str_PosID;
    private variable bool_SequenceValid;
    o_str_ConfigFilePath = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    o_str_ConfigFilePath = Translate("");
    LABWARE_GetCarrierAndSiteID(Instrument, i_seq_Labware, str_Template, str_TemplateSite);
    //Get Config File
    {
         object objDeckLayout;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              object objLabware;
              onerror goto HandleLabwareError;
              objLabware = objDeckLayout.Labware(str_Template);
              onerror goto 0;
              err.Clear();
              if(!objLabware.IsNull())
              {
                   object objEditLabware5;
                   objLabware.GetObject("IEditLabware5", objEditLabware5);
                  o_str_ConfigFilePath = objEditLabware5.Filename;
                   objEditLabware5.ReleaseObject();
                   objDeckLayout.ReleaseObject();
                   objLabware.ReleaseObject();
              }
         }
               // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
                 if(errorID != 0)
                 {
                      if (errorID==-1574764487)
                      {
                            Trace("LabwareID is  unknown.");
                      }
                      else
                      {
                            Trace("Unknown error occured.");
                      }
                 }
            }
    }
  }

  function TEMPLATE_GetTemplateOrigin( device & Instrument, sequence i_seq_Labware, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void {
    private variable str_TemplateSite;
    private variable flt_NotUsed;
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_Template;
    private variable str_PosID;
    private variable bool_SequenceValid;
    o_flt_X_Coord = 0;
    o_flt_Y_Coord = 0;
    o_flt_Z_Coord = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    LABWARE_GetCarrierAndSiteID(Instrument, i_seq_Labware, str_Template, str_TemplateSite);
    o_flt_X_Coord = 0.0;
    o_flt_Y_Coord = 0.0;
    o_flt_Z_Coord = 0.0;
    DevGetLabwarePosition(Instrument, str_Template, o_flt_X_Coord, o_flt_Y_Coord, o_flt_Z_Coord, flt_NotUsed);
  }

  private function _CalcualteOffsetHeight( variable i_flt_WellAngle, variable i_flt_YOffset, variable & o_flt_ZOffset ) void {
    private variable flt_Calculation1;
    private variable flt_Calculation2;
    private variable flt_Radians;
    private variable flt_Pi;
    o_flt_ZOffset = 0;
    flt_Pi = 3.14159265359;
    flt_Radians = 0.0;
    flt_Radians = i_flt_WellAngle * (flt_Pi / 180);
    flt_Calculation1 = MthTan(flt_Radians);
    flt_Calculation2 = flt_Calculation1 * i_flt_YOffset;
    o_flt_ZOffset = MthRound(flt_Calculation2, 1);
  }

  private function _CalculateWellAngle( variable i_flt_BottomWellSegment_Height, variable i_flt_BottomWellSegment_TopWidth, variable i_flt_BottomWellSegment_BottomWidth, variable & o_flt_BottomWellSegment_Angle ) void {
    private variable flt_Angle;
    private variable flt_BottomRadius;
    private variable flt_Calculation;
    private variable flt_Pi;
    private variable flt_WellRadius;
    o_flt_BottomWellSegment_Angle = 0;
    flt_Pi = 3.14159265359;
    flt_BottomRadius = 0.0;
    if (i_flt_BottomWellSegment_BottomWidth > 0)
    {
      flt_BottomRadius = i_flt_BottomWellSegment_BottomWidth / (2 * 1.0);
    }
    flt_WellRadius = i_flt_BottomWellSegment_TopWidth / (2 * 1.0);
    if (flt_WellRadius > flt_BottomRadius)
    {
      flt_WellRadius = flt_WellRadius - flt_BottomRadius;
    }
    flt_Calculation = i_flt_BottomWellSegment_Height / (flt_WellRadius * 1.0);
    flt_Angle = MthATan(flt_Calculation);
    flt_Angle = flt_Angle * (180.0 / flt_Pi);
    o_flt_BottomWellSegment_Angle = MthRound(flt_Angle, 1);
  }

  private function _ConvertToFloat( variable iVariable, variable & oVariable ) void {
    private variable str_Variable;
    oVariable = 0;
    str_Variable = StrConcat2(iVariable, Translate(""));
    oVariable = StrFVal(str_Variable);
  }

  private function _ConvertToInteger( variable iVariable, variable & oVariable ) void {
    private variable str_Variable;
    oVariable = 0;
    str_Variable = StrConcat2(iVariable, Translate(""));
    oVariable = StrIVal(str_Variable);
  }

  private function _FunctionError( variable i_str_FunctionName, variable i_str_ErrorDescription ) void {
    private variable int_CutNum;
    private variable str_ErrorDescription;
    private variable int_Length;
    private variable strFunctionName;
    private variable int_Count;
    int_Count = StrReverseFind(i_str_FunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(i_str_FunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName = StrMid(i_str_FunctionName, int_Count, int_CutNum);
    str_ErrorDescription = StrConcat8(strFunctionName, Translate("\n\n"), i_str_ErrorDescription, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    ErrRaise(101, str_ErrorDescription);
  }

  private function _GetLabwareOrigin( device & Instrument, variable i_str_LabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void {
    private variable flt_RackBase;
    private variable flt_BoundaryX;
    private variable flt_BoundaryY;
    private variable flt_RackWidthX;
    private variable flt_RackWidthY;
    o_flt_X_Coord = 0;
    o_flt_Y_Coord = 0;
    o_flt_Z_Coord = 0;
    o_flt_X_Coord = 0.0;
    o_flt_Y_Coord = 0.0;
    o_flt_Z_Coord = 0.0;
    flt_BoundaryX = 0.0;
    flt_BoundaryY = 0.0;
    flt_RackWidthX = 0.0;
    flt_RackWidthY = 0.0;
    flt_RackBase = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      flt_BoundaryX = objRackDataParams.Item1("Labwr_Bndry1X");
      flt_BoundaryY = objRackDataParams.Item1("Labwr_Bndry1Y");
      flt_RackWidthX = objRackDataParams.Item1("Labwr_XDim");
      flt_RackWidthY = objRackDataParams.Item1("Labwr_YDim");
      flt_RackBase = objRack4.RackBase();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_flt_X_Coord = flt_BoundaryX;
    o_flt_Y_Coord = flt_BoundaryY;
    o_flt_Z_Coord = flt_RackBase;
    o_flt_Z_Coord = MthRound(o_flt_Z_Coord, 1);
  }

  private function _GetLabwareWL( device & Instrument, variable i_str_LabID, variable & o_flt_LabwareWidth, variable & o_flt_LabwareLength ) void {
    private variable flt_RackWidthX;
    private variable flt_RackWidthY;
    o_flt_LabwareWidth = 0;
    o_flt_LabwareLength = 0;
    o_flt_LabwareWidth = 0.0;
    o_flt_LabwareLength = 0.0;
    flt_RackWidthX = 0.0;
    flt_RackWidthY = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      o_flt_LabwareLength = objRackDataParams.Item1("Labwr_XDim");
      o_flt_LabwareWidth = objRackDataParams.Item1("Labwr_YDim");
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
  }

  private function _GetSequencePosition( device & Instrument, sequence i_seq_LabwareSequence, variable & o_str_LabID, variable & o_str_PosID ) variable {
    private variable bool_SequenceValid;
    o_str_LabID = 0;
    o_str_PosID = 0;
    bool_SequenceValid = 1;
    onerror goto errLabel_1 ;
    err.Clear();
    o_str_LabID = SeqGetLabwareId(i_seq_LabwareSequence);
    o_str_PosID = SeqGetPositionId(i_seq_LabwareSequence);
    if (o_str_LabID == "")
    {
      bool_SequenceValid = 0;
    }
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      bool_SequenceValid = 0;
    }   /* end if from skip handler if no error */
    return (bool_SequenceValid);
  }

  private function _RemoveTruncatedSequencePositions( device & Instrument, sequence & io_Sequence ) void {
    private variable i;
    private variable int_TotalSequencePositions;
    private variable str_LabID;
    private variable str_PosID;
    private sequence seq_AdjustedSequence;
    int_TotalSequencePositions = SeqGetTotal(io_Sequence);
    SeqRemoveAll(seq_AdjustedSequence);
    {
      for(i = 0; i < int_TotalSequencePositions;)
      {
        i = i + 1;
        str_LabID = SeqGetLabwareId(io_Sequence);
        str_PosID = SeqGetPositionId(io_Sequence);
        SeqIncrement(io_Sequence, 1);
        if (str_LabID != "")
        {
          if (str_PosID != "")
          {
            SeqAdd(seq_AdjustedSequence, str_LabID, str_PosID);
          }
        }
      }
    }
    seq_AdjustedSequence.SetCurrentPosition(1);
    SeqCopySequence(io_Sequence, seq_AdjustedSequence);
  }

  function ADJUST_AddContainerToPosition( device & Instrument, sequence i_seq_LabwareToChange, variable i_str_NewContainerFile, variable i_flt_OffsetX, variable i_flt_OffsetY, variable i_flt_OffsetZ ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable str_LabID;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_PosID;
    private variable bool_SequenceValid;
    private variable bln_FileExists;
    private variable str_Extension;
    private variable str_FileName;
    private variable flt_ContainerXOffset;
    private variable flt_ContainerYOffset;
    private variable flt_ContainerBaseOffset;
    private variable str_Return;
    private variable str_LabwareConfigFilePath;
    private variable int_SingleContainer;
    private sequence seq_Temp;
    private variable int_ContainerIndex;
    private variable str_OffsetX;
    private variable str_OffsetY;
    private variable str_OffsetZ;
    private variable flt_Y_Offset;
    private variable flt_Z_Offset;
    private variable flt_X_Offset;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_LabwareToChange, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    bln_FileExists = HSLExtensions::File::Exists(i_str_NewContainerFile);
    if (bln_FileExists == 0)
    {
      Trace(i_str_NewContainerFile,":  FILE DOESN'T EXIST!");
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      return;
    }
    str_Extension = HSLExtensions::File::GetFileExtension(i_str_NewContainerFile);
    if (str_Extension != "ctr")
    {
      Trace(i_str_NewContainerFile,":  FILE NOT A CONTAINER FILE!");
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      return;
    }
    LABWARE_GetConfigFile(Instrument, i_seq_LabwareToChange, str_LabwareConfigFilePath);
    FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, Translate("SingleCntr"), str_Return);
    _ConvertToInteger(str_Return, int_SingleContainer);
    if (int_SingleContainer == 0)
    {
      SEQ_GetDefaultSequenceForLabware(Instrument, str_LabID, seq_Temp);
      int_ContainerIndex = SeqLookupPosition(seq_Temp, str_LabID, str_PosID, 1, 1);
    }
    else
    {
      int_ContainerIndex = 1;
    }
    str_OffsetX = StrConcat4(Translate("Cntr."), int_ContainerIndex, Translate(".offsetx"), Translate(""));
    FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, str_OffsetX, str_Return);
    _ConvertToFloat(str_Return, flt_ContainerXOffset);
    str_OffsetY = StrConcat4(Translate("Cntr."), int_ContainerIndex, Translate(".offsety"), Translate(""));
    FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, str_OffsetY, str_Return);
    _ConvertToFloat(str_Return, flt_ContainerYOffset);
    str_OffsetZ = StrConcat4(Translate("Cntr."), int_ContainerIndex, Translate(".base"), Translate(""));
    FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, str_OffsetZ, str_Return);
    _ConvertToFloat(str_Return, flt_ContainerBaseOffset);
    str_FileName = HSLExtensions::File::GetFileNameWithoutExtension(i_str_NewContainerFile);
    flt_X_Offset = i_flt_OffsetX + flt_ContainerXOffset;
    flt_Y_Offset = i_flt_OffsetY + flt_ContainerYOffset;
    flt_Z_Offset = i_flt_OffsetZ + flt_ContainerBaseOffset;
    Trace("Add ",str_FileName," to ",str_LabID," at ",str_PosID," with offsets ","X: ",flt_X_Offset," Y: ",flt_Y_Offset," Z: ",flt_Z_Offset);
    DevAddContainerToRack(Instrument, str_LabID, str_PosID, i_str_NewContainerFile, flt_X_Offset, flt_Y_Offset, flt_Z_Offset);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function LABWARE_GetLabwareCenter( device & Instrument, sequence i_seq_Labware, variable & o_flt_X_Center, variable & o_flt_Y_Center ) void {
    private variable str_ConfigFilePath;
    private variable strFunctionName;
    private variable str_LabID;
    private variable str_PosID;
    private variable bool_SequenceValid;
    private variable flt_Pi;
    private variable flt_Width;
    private variable str_X;
    private variable str_Y;
    private variable flt_Length;
    private variable flt_Origin_X;
    private variable flt_Origin_Y;
    private variable flt_Origin_Z;
    private variable flt_NotUsed;
    private variable flt_Offset_X;
    private variable flt_Offset_Y;
    private variable flt_Center_X;
    private variable flt_HalfLength;
    private variable flt_HalfHyp;
    private variable flt_Radians;
    private variable flt_Center_Y;
    private variable flt_Calculation;
    private variable flt_HalfWidth;
    private variable flt_Hypotenuse;
    private variable flt_PlateAngle;
    private variable flt_AdjustedPlateAngle;
    private variable flt_LabwareAngle;
    private variable flt_CosineCalculation;
    private variable flt_SineCalculation;
    o_flt_X_Center = 0;
    o_flt_Y_Center = 0;
    o_flt_X_Center = 0.0;
    o_flt_Y_Center = 0.0;
    flt_Pi = 3.14159265359;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    str_ConfigFilePath = Translate("");
    //Get Config File
    {
         object objDeckLayout;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              object objLabware;
              onerror goto HandleLabwareError;
              objLabware = objDeckLayout.Labware(str_LabID);
              onerror goto 0;
              err.Clear();
              if(!objLabware.IsNull())
              {
                   object objEditLabware5;
                   objLabware.GetObject("IEditLabware5", objEditLabware5);
                  str_ConfigFilePath = objEditLabware5.Filename;
                   objEditLabware5.ReleaseObject();
                   objDeckLayout.ReleaseObject();
                   objLabware.ReleaseObject();
              }
         }
               // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
                 if(errorID != 0)
                 {
                      if (errorID==-1574764487)
                      {
                            Trace("LabwareID is  unknown.");
                      }
                      else
                      {
                            Trace("Unknown error occured.");
                      }
                 }
            }
    }
    FILE_GetDefinitionFileValue(str_ConfigFilePath, Translate("Dim.Dx"), str_X);
    FILE_GetDefinitionFileValue(str_ConfigFilePath, Translate("Dim.Dy"), str_Y);
    flt_Width = StrFVal(str_X);
    flt_Length = StrFVal(str_Y);
    LABWARE_GetLabwareOrigin(Instrument, i_seq_Labware, flt_Origin_X, flt_Origin_Y, flt_Origin_Z);
    flt_Hypotenuse = 0.0;
    flt_Hypotenuse = flt_Length^2 + flt_Width^2;
    flt_Hypotenuse = MthPow(flt_Hypotenuse, 0.5);
    flt_Hypotenuse = MthRound(flt_Hypotenuse, 1);
    flt_HalfHyp = flt_Hypotenuse / (2 * 1.0);
    flt_HalfLength = flt_Length / (2 * 1.0);
    flt_HalfWidth = flt_Width / (2 * 1.0);
    DevGetLabwarePosition(Instrument, str_LabID, flt_NotUsed, flt_NotUsed, flt_NotUsed, flt_LabwareAngle);
    flt_Calculation = flt_HalfLength / (flt_HalfWidth * 1.0);
    flt_PlateAngle = MthATan(flt_Calculation);
    flt_PlateAngle = flt_PlateAngle * (180.0 / flt_Pi);
    flt_PlateAngle = MthRound(flt_PlateAngle, 1);
    flt_LabwareAngle = flt_LabwareAngle * -1;
    flt_AdjustedPlateAngle = flt_LabwareAngle + flt_PlateAngle;
    flt_Radians = flt_AdjustedPlateAngle * (flt_Pi / 180);
    flt_CosineCalculation = MthCos(flt_Radians);
    flt_SineCalculation = MthSin(flt_Radians);
    flt_Offset_X = flt_CosineCalculation * flt_HalfHyp;
    flt_Offset_X = MthRound(flt_Offset_X, 1);
    flt_Offset_Y = flt_SineCalculation * flt_HalfHyp;
    flt_Offset_Y = MthRound(flt_Offset_Y, 1);
    flt_Center_X = flt_Origin_X + flt_Offset_X;
    flt_Center_Y = flt_Origin_Y + flt_Offset_Y;
    o_flt_X_Center = MthRound(flt_Center_X, 1);
    o_flt_Y_Center = MthRound(flt_Center_Y, 1);
  }

  function ADJUST_AddCarrierToDeckSite( device & Instrument, variable i_str_ConfigFile, variable i_str_NewLabwareID, variable i_int_DeckPosition ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable bln_LabwareExists;
    private variable bln_FileExists;
    private variable str_DimensionXKey;
    private variable flt_TrackWidth;
    private variable str_InstrumentKey;
    private variable str_InstrumentValue;
    private variable str_DeckLayoutFile;
    private variable bln_InstrumentSTAR;
    private variable str_XValue;
    private variable flt_XValue;
    private variable int_TrackCount;
    private variable str_TrackNumber;
    private variable arr_Labware[];
    private variable arr_VisState[];
    private variable str_TrackCount;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    str_DimensionXKey = Translate("Dim.Dx");
    str_InstrumentKey = Translate("Instrument");
    Trace("Config file:  ",i_str_ConfigFile);
    bln_FileExists = HSLExtensions::File::Exists(i_str_ConfigFile);
    if (bln_FileExists == 0)
    {
      _FunctionError(strFunctionName, Translate("Config file doesn't exist!"));
    }
    str_DeckLayoutFile = DevGetDeckLayoutFileName(Instrument);
    FILE_GetDefinitionFileValue(str_DeckLayoutFile, str_InstrumentKey, str_InstrumentValue);
    bln_InstrumentSTAR = StrReplace(str_InstrumentValue, Translate("STAR"), Translate("STAR"));
    if (bln_InstrumentSTAR > 0)
    {
      flt_TrackWidth = 22.5;
    }
    else
    {
      flt_TrackWidth = 21.83;
    }
    FILE_GetDefinitionFileValue(i_str_ConfigFile, str_DimensionXKey, str_XValue);
    flt_XValue = StrFVal(str_XValue);
    int_TrackCount = flt_XValue / flt_TrackWidth;
    str_TrackCount = StrConcat2(int_TrackCount, Translate(""));
    int_TrackCount = StrIVal(str_TrackCount);
    str_TrackNumber = StrConcat4(int_TrackCount, Translate("T"), Translate("-"), i_int_DeckPosition);
    bln_LabwareExists = DevIsValidLabwareForCurrentDeckLayout(Instrument, i_str_NewLabwareID);
    if (bln_LabwareExists == 1)
    {
      _FunctionError(strFunctionName, Translate("Labware not unique!"));
    }
    Trace("Now adding ",i_str_NewLabwareID," at deck site ",str_TrackNumber);
    DevAddLabwareToTemplate(Instrument, i_str_NewLabwareID, i_str_ConfigFile, Translate("default"), str_TrackNumber);
    arr_Labware.SetSize(0);
    arr_VisState.SetSize(0);
    arr_Labware.AddAsLast(i_str_NewLabwareID);
    arr_VisState.AddAsLast(1);
    DeckVisualize::UpdateLoadedLabware(Instrument, arr_Labware, arr_VisState, Translate("Make new labware visible"));
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function TEMPLATE_GetConfigFile2( device & Instrument, variable i_str_Labware, variable & o_str_ConfigFilePath ) void {
    o_str_ConfigFilePath = 0;
    o_str_ConfigFilePath = Translate("");
    //Get Config File
    {
         object objDeckLayout;
         objDeckLayout = Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              object objLabware;
              onerror goto HandleLabwareError;
              objLabware = objDeckLayout.Labware(i_str_Labware);
              onerror goto 0;
              err.Clear();
              if(!objLabware.IsNull())
              {
                   object objEditLabware5;
                   objLabware.GetObject("IEditLabware5", objEditLabware5);
                  o_str_ConfigFilePath = objEditLabware5.Filename;
                   objEditLabware5.ReleaseObject();
                   objDeckLayout.ReleaseObject();
                   objLabware.ReleaseObject();
              }
         }
               // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
                 if(errorID != 0)
                 {
                      if (errorID==-1574764487)
                      {
                            Trace("LabwareID is  unknown.");
                      }
                      else
                      {
                            Trace("Unknown error occured.");
                      }
                 }
            }
    }
  }

  function TEMPLATE_GetTemplateOrigin2( device & Instrument, variable i_str_TemplateLabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void {
    private variable flt_NotUsed;
    o_flt_X_Coord = 0;
    o_flt_Y_Coord = 0;
    o_flt_Z_Coord = 0;
    o_flt_X_Coord = 0.0;
    o_flt_Y_Coord = 0.0;
    o_flt_Z_Coord = 0.0;
    DevGetLabwarePosition(Instrument, i_str_TemplateLabID, o_flt_X_Coord, o_flt_Y_Coord, o_flt_Z_Coord, flt_NotUsed);
  }

  function ADJUST_AddContainerToPositions( device & Instrument, sequence i_seq_LabwareToChange, variable i_str_NewContainerFile, variable i_flt_OffsetX, variable i_flt_OffsetY, variable i_flt_OffsetZ ) void {
    private variable flt_ContainerXOffset;
    private variable flt_ContainerYOffset;
    private variable int_CutNum;
    private variable int_Length;
    private variable flt_Y_Offset;
    private variable str_OffsetX;
    private variable int_SingleContainer;
    private variable strFunctionName;
    private variable bln_FileExists;
    private variable str_OffsetY;
    private variable str_OffsetZ;
    private variable strFunctionName_Cut;
    private variable flt_ContainerBaseOffset;
    private variable str_LabID;
    private variable str_FileName;
    private variable flt_Z_Offset;
    private variable str_Extension;
    private variable str_Return;
    private variable int_Count;
    private variable bool_SequenceValid;
    private variable flt_X_Offset;
    private variable str_PosID;
    private variable int_ContainerIndex;
    private variable str_LabwareConfigFilePath;
    private sequence seq_Temp;
    private sequence i_seq_LabwarePositionsToOffset;
    private variable int_TotalPositions;
    private variable i;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_LabwareToChange, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    bln_FileExists = HSLExtensions::File::Exists(i_str_NewContainerFile);
    if (bln_FileExists == 0)
    {
      Trace(i_str_NewContainerFile,":  FILE DOESN'T EXIST!");
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      return;
    }
    str_Extension = HSLExtensions::File::GetFileExtension(i_str_NewContainerFile);
    if (str_Extension != "ctr")
    {
      Trace(i_str_NewContainerFile,":  FILE NOT A CONTAINER FILE!");
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      return;
    }
    _RemoveTruncatedSequencePositions(Instrument, i_seq_LabwarePositionsToOffset);
    LABWARE_GetConfigFile(Instrument, i_seq_LabwareToChange, str_LabwareConfigFilePath);
    FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, Translate("SingleCntr"), str_Return);
    _ConvertToInteger(str_Return, int_SingleContainer);
    int_TotalPositions = SeqGetTotal(i_seq_LabwareToChange);
    SEQ_GetDefaultSequenceForLabware(Instrument, str_LabID, seq_Temp);
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        str_LabID = SeqGetLabwareId(i_seq_LabwareToChange);
        str_PosID = SeqGetPositionId(i_seq_LabwareToChange);
        SeqIncrement(i_seq_LabwareToChange, 1);
        if (int_SingleContainer == 0)
        {
          int_ContainerIndex = SeqLookupPosition(seq_Temp, str_LabID, str_PosID, 1, 1);
        }
        else
        {
          int_ContainerIndex = 1;
        }
        str_OffsetX = StrConcat4(Translate("Cntr."), int_ContainerIndex, Translate(".offsetx"), Translate(""));
        FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, str_OffsetX, str_Return);
        _ConvertToFloat(str_Return, flt_ContainerXOffset);
        str_OffsetY = StrConcat4(Translate("Cntr."), int_ContainerIndex, Translate(".offsety"), Translate(""));
        FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, str_OffsetY, str_Return);
        _ConvertToFloat(str_Return, flt_ContainerYOffset);
        str_OffsetZ = StrConcat4(Translate("Cntr."), int_ContainerIndex, Translate(".base"), Translate(""));
        FILE_GetDefinitionFileValue(str_LabwareConfigFilePath, str_OffsetZ, str_Return);
        _ConvertToFloat(str_Return, flt_ContainerBaseOffset);
        str_FileName = HSLExtensions::File::GetFileNameWithoutExtension(i_str_NewContainerFile);
        flt_X_Offset = i_flt_OffsetX + flt_ContainerXOffset;
        flt_Y_Offset = i_flt_OffsetY + flt_ContainerYOffset;
        flt_Z_Offset = i_flt_OffsetZ + flt_ContainerBaseOffset;
        Trace("Add ",str_FileName," to ",str_LabID," at ",str_PosID," with offsets ","X: ",i_flt_OffsetX," Y: ",i_flt_OffsetY," Z: ",i_flt_OffsetZ);
        DevAddContainerToRack(Instrument, str_LabID, str_PosID, i_str_NewContainerFile, flt_X_Offset, flt_Y_Offset, flt_Z_Offset);
      }
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function ADJUST_StackCreateAtTemplateSite( device & Instrument, variable i_str_ConfigFile, variable i_str_LabwareNameForStack, variable i_str_TemplateID, variable i_str_TemplateSiteID, variable i_int_TotalStack, variable i_int_LabwareType, variable i_bln_LiddedLabware, variable & o_arr_StackedLabware[] ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_ConfigFile;
    private variable str_LabwareNameForStack;
    private variable str_TemplateID;
    private variable str_TemplateSiteID;
    private variable str_LabwareType;
    private variable bln_LiddedLabware;
    private variable int_TotalStack;
    o_arr_StackedLabware.SetSize( 0);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    str_ConfigFile = i_str_ConfigFile;
    str_LabwareNameForStack = i_str_LabwareNameForStack;
    str_TemplateID = i_str_TemplateID;
    str_TemplateSiteID = i_str_TemplateSiteID;
    str_TemplateSiteID = i_str_TemplateSiteID;
    bln_LiddedLabware = i_bln_LiddedLabware;
    int_TotalStack = i_int_TotalStack;
    if (i_int_LabwareType == 0)
    {
      str_LabwareType = Translate("HxLabwr2.RectRack.1");
    }
    else
    {
      str_LabwareType = Translate("HxLabwr2.CircRack.1");
    }
    o_arr_StackedLabware.SetSize(0);
    {
         // HxPars keys
          static string P_XCOORD("Labwr_XCoord");
          static string P_YCOORD("Labwr_YCoord");
          static string P_ZCOORD("Labwr_ZCoord");
          static string P_RZCOORD("Labwr_Rotation");
          static string P_LABWARE_ID("Labwr_Id");
          // additions
          static string P_FILE("Labwr_File");
          static string P_COUNT("Labwr_count");
          static string P_DKSITEID("Labwr_DkSiteId");
          static string P_TEMPLATEID("Labwr_TemplateId");
          static string P_XDIM("Labwr_XDim");
          static string P_YDIM("Labwr_YDim");
          static string P_ISCOVERED("Labwr_IsCovered");
          static string P_CLSID("Labwr_CLSID");
          static string P_DKSITEDX("Labwr_DkSiteDimX");
          static string P_DKSITEDY("Labwr_DkSiteDimY");
          static string P_DECKSITES("Labwr_SiteData");
          static string P_STACKID("Labwr_stackID");
         object   objDecklayout;
         objDecklayout = Instrument.GetDeckLayoutObject();
         if (!objDecklayout.IsNull())
         {
                  object EditDecklayout5;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  variable myKeys[];
                  variable intCounter;
                  variable blnPlate(hslTrue);
                  objDecklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  Parameter.CreateObject("HXPARAMSLib.HxPars");
                  Parameter.Add(str_ConfigFile, P_FILE);
                  Parameter.Add(str_LabwareNameForStack, P_LABWARE_ID);
                  Parameter.Add(int_TotalStack, P_COUNT);
                  Parameter.Add(str_TemplateSiteID, P_DKSITEID);
                  Parameter.Add(str_TemplateID, P_TEMPLATEID);
                  Parameter.Add(0, P_XDIM);
                  Parameter.Add(0, P_YDIM);
                  Parameter.Add(bln_LiddedLabware, P_ISCOVERED);
                  Parameter.Add(str_LabwareType, P_CLSID);
                  objDecklayout.AddStackToDecksite(Parameter);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  objDecklayout.TemplateLabwareNames(LabwareObjects);
                  myKeys = LabwareObjects.GetKeys();
                  for(intCounter=1; intCounter<=myKeys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      if(LabwareNames.Item1("Labwr_TemplateId") == str_TemplateID && LabwareNames.Item1("Labwr_DkSiteId") == str_TemplateSiteID)
                      {
                           if (!blnPlate && bln_LiddedLabware)
                           {
                                o_arr_StackedLabware.AddAsLast(LabwareNames.Item1("Labwr_Id"));
                                blnPlate=hslTrue;
                           }
                           else
                           {
                                if(bln_LiddedLabware) blnPlate=hslFalse;
                                o_arr_StackedLabware.AddAsLast(LabwareNames.Item1("Labwr_Id"));
                           }
                      }
                  }
                  objDecklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  Parameter.ReleaseObject();
                  LabwareObjects.ReleaseObject();
                  LabwareNames.ReleaseObject();
         }
    }
    Util2::Debug::TraceArray(Translate("Stacked Labware"), o_arr_StackedLabware);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function ADJUST_StackIncrease( device & Instrument, variable i_str_LabwareNameForStack, variable & o_str_LabwareID ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_LabwareNameForStack;
    o_str_LabwareID = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    str_LabwareNameForStack = i_str_LabwareNameForStack;
    o_str_LabwareID = Translate("");
    {
         // HxPars keys
          static string P_XCOORD("Labwr_XCoord");
          static string P_YCOORD("Labwr_YCoord");
          static string P_ZCOORD("Labwr_ZCoord");
          static string P_RZCOORD("Labwr_Rotation");
          static string P_LABWARE_ID("Labwr_Id");
          // additions
          static string P_FILE("Labwr_File");
          static string P_COUNT("Labwr_count");
          static string P_DKSITEID("Labwr_DkSiteId");
          static string P_TEMPLATEID("Labwr_TemplateId");
          static string P_XDIM("Labwr_XDim");
          static string P_YDIM("Labwr_YDim");
          static string P_ISCOVERED("Labwr_IsCovered");
          static string P_CLSID("Labwr_CLSID");
          static string P_DKSITEDX("Labwr_DkSiteDimX");
          static string P_DKSITEDY("Labwr_DkSiteDimY");
          static string P_DECKSITES("Labwr_SiteData");
          static string P_STACKID("Labwr_stackID");
         object   objDecklayout;
         variable strTemplateID;
         variable strTemplateSiteID;
         string   strLabwareID;
         objDecklayout = Instrument.GetDeckLayoutObject();
         if (!objDecklayout.IsNull())
         {
                  object EditDecklayout5;
                  object EditDecklayout7;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  variable myKeys[];
                  variable intCounter;
                  variable intInverseCounter;
                  variable blnPlate(hslTrue);
                  objDecklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  objDecklayout.GetObject("IEditDeckLayout7", EditDecklayout7);
                  Parameter.CreateObject("HXPARAMSLib.HxPars");
                  Parameter.Add(str_LabwareNameForStack, P_STACKID);
                  objDecklayout.IncreaseStack(Parameter);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  EditDecklayout7.GetLabwareData(LabwareObjects);
                  myKeys = LabwareObjects.GetKeys();
                  // Get the template site ID and template ID of the stack
                  for(intCounter=1; intCounter<=myKeys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      if(LabwareNames.Item1("Labwr_Id") == str_LabwareNameForStack)
                      {
                           strTemplateID=LabwareNames.Item1("Labwr_TemplateId");
                           strTemplateSiteID=LabwareNames.Item1("Labwr_DkSiteId");
                      }
                  }
                  // Get all the labware on this site
                  objDecklayout.TemplateLabwareNames(LabwareObjects);
                  myKeys = LabwareObjects.GetKeys();
                  intInverseCounter=myKeys.GetSize();
                  for(intCounter=1; intCounter<=myKeys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intInverseCounter);
                      intInverseCounter=intInverseCounter-1;
                      if(LabwareNames.Item1("Labwr_TemplateId") == strTemplateID && LabwareNames.Item1("Labwr_DkSiteId") == strTemplateSiteID && LabwareNames.Item1("Labwr_Id")!=str_LabwareNameForStack)
                      {
                             strLabwareID=LabwareNames.Item1("Labwr_Id");
                             if(strLabwareID.Find("_lid")==-1) o_str_LabwareID=strLabwareID;
                             else o_str_LabwareID=strLabwareID;
                      }
                  }
                  objDecklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  EditDecklayout7.ReleaseObject();
                  Parameter.ReleaseObject();
                  LabwareObjects.ReleaseObject();
                  LabwareNames.ReleaseObject();
         }
    }
    Trace("New Labware ID:  ",o_str_LabwareID);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function ADJUST_StackDecrease( device & Instrument, variable i_str_LabwareNameForStack, variable & o_arr_StackedLabware[] ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_LabwareNameForStack;
    private variable arr_CurrentStack[];
    o_arr_StackedLabware.SetSize( 0);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    str_LabwareNameForStack = i_str_LabwareNameForStack;
    arr_CurrentStack.SetSize(0);
    arr_CurrentStack.SetSize(0);
    {
         // HxPars keys
          static string P_XCOORD("Labwr_XCoord");
          static string P_YCOORD("Labwr_YCoord");
          static string P_ZCOORD("Labwr_ZCoord");
          static string P_RZCOORD("Labwr_Rotation");
          static string P_LABWARE_ID("Labwr_Id");
          // additions
          static string P_FILE("Labwr_File");
          static string P_COUNT("Labwr_count");
          static string P_DKSITEID("Labwr_DkSiteId");
          static string P_TEMPLATEID("Labwr_TemplateId");
          static string P_XDIM("Labwr_XDim");
          static string P_YDIM("Labwr_YDim");
          static string P_ISCOVERED("Labwr_IsCovered");
          static string P_CLSID("Labwr_CLSID");
          static string P_DKSITEDX("Labwr_DkSiteDimX");
          static string P_DKSITEDY("Labwr_DkSiteDimY");
          static string P_DECKSITES("Labwr_SiteData");
          static string P_STACKID("Labwr_stackID");
          object   objDecklayout;
          variable strTemplateID;
          variable strTemplateSiteID;
          string   strLabwareID;
          objDecklayout = Instrument.GetDeckLayoutObject();
          if (!objDecklayout.IsNull())
          {
                  object EditDecklayout5;
                  object EditDecklayout7;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  variable myKeys[];
                  variable intCounter;
                  variable intInverseCounter;
                  variable blnPlate(hslTrue);
                  objDecklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  objDecklayout.GetObject("IEditDeckLayout7", EditDecklayout7);
                  Parameter.CreateObject("HXPARAMSLib.HxPars");
                  Parameter.Add(str_LabwareNameForStack, P_STACKID);
                  objDecklayout.DecreaseStack(Parameter);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  EditDecklayout7.GetLabwareData(LabwareObjects);
                  myKeys = LabwareObjects.GetKeys();
                  // Get the template site ID and template ID of the stack
                  for(intCounter=1; intCounter<=myKeys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      if(LabwareNames.Item1("Labwr_Id") == str_LabwareNameForStack)
                      {
                           strTemplateID=LabwareNames.Item1("Labwr_TemplateId");
                           strTemplateSiteID=LabwareNames.Item1("Labwr_DkSiteId");
                      }
                  }
                  // Get all the labware on this site
                  objDecklayout.TemplateLabwareNames(LabwareObjects);
                  myKeys = LabwareObjects.GetKeys();
                  intInverseCounter=myKeys.GetSize();
                  for(intCounter=1; intCounter<=myKeys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      intInverseCounter=intInverseCounter-1;
                      if(LabwareNames.Item1("Labwr_TemplateId") == strTemplateID && LabwareNames.Item1("Labwr_DkSiteId") == strTemplateSiteID && LabwareNames.Item1("Labwr_Id")!=str_LabwareNameForStack)
                      {
                             strLabwareID=LabwareNames.Item1("Labwr_Id");
                             arr_CurrentStack.AddAsLast(strLabwareID);
                             //if(strLabwareID.Find("_lid")==-1) o_strLabwareID=strLabwareID;
                             //else o_strLabwareLidID=strLabwareID;
                      }
                  }
                  objDecklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  EditDecklayout7.ReleaseObject();
                  Parameter.ReleaseObject();
                  LabwareObjects.ReleaseObject();
                  LabwareNames.ReleaseObject();
          }
    }
    Util2::Debug::TraceArray(Translate("Current Stack"), arr_CurrentStack);
    o_arr_StackedLabware=arr_CurrentStack;
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function ADJUST_GetCurrentStack( device & Instrument, variable i_str_LabwareNameForStack, variable & o_arr_StackedLabware[] ) void {
    private variable str_LabwareNameForStack;
    private variable arr_CurrentStack[];
    private variable int_Length;
    private variable int_TrimLeftNumber;
    o_arr_StackedLabware.SetSize( 0);
    if(0){
      str_LabwareNameForStack = i_str_LabwareNameForStack;
    }
    int_Length = StrGetLength(i_str_LabwareNameForStack);
    int_TrimLeftNumber = int_Length - 5;
    str_LabwareNameForStack = StrLeft(i_str_LabwareNameForStack, int_TrimLeftNumber);
    arr_CurrentStack.SetSize(0);
    arr_CurrentStack.SetSize(0);
    {
         // HxPars keys
          static string P_XCOORD("Labwr_XCoord");
          static string P_YCOORD("Labwr_YCoord");
          static string P_ZCOORD("Labwr_ZCoord");
          static string P_RZCOORD("Labwr_Rotation");
          static string P_LABWARE_ID("Labwr_Id");
          // additions
          static string P_FILE("Labwr_File");
          static string P_COUNT("Labwr_count");
          static string P_DKSITEID("Labwr_DkSiteId");
          static string P_TEMPLATEID("Labwr_TemplateId");
          static string P_XDIM("Labwr_XDim");
          static string P_YDIM("Labwr_YDim");
          static string P_ISCOVERED("Labwr_IsCovered");
          static string P_CLSID("Labwr_CLSID");
          static string P_DKSITEDX("Labwr_DkSiteDimX");
          static string P_DKSITEDY("Labwr_DkSiteDimY");
          static string P_DECKSITES("Labwr_SiteData");
          static string P_STACKID("Labwr_stackID");
          object   objDecklayout;
          variable strTemplateID;
          variable strTemplateSiteID;
          string   strLabwareID;
          objDecklayout = Instrument.GetDeckLayoutObject();
          if (!objDecklayout.IsNull())
          {
                  object EditDecklayout5;
                  object EditDecklayout7;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  variable myKeys[];
                  variable intCounter;
                  variable intInverseCounter;
                  variable blnPlate(hslTrue);
                  objDecklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  objDecklayout.GetObject("IEditDeckLayout7", EditDecklayout7);
                  //Parameter.CreateObject("HXPARAMSLib.HxPars");
                  //Parameter.Add(str_LabwareNameForStack, P_STACKID);
                  //objDecklayout.DecreaseStack(Parameter);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  EditDecklayout7.GetLabwareData(LabwareObjects);
                  myKeys = LabwareObjects.GetKeys();
                  strTemplateID = "";
                  strTemplateSiteID = "";
                  // Get the template site ID and template ID of the stack
                  for(intCounter=1; intCounter<=myKeys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      if(LabwareNames.Item1("Labwr_Id") == str_LabwareNameForStack)
                      {
                           strTemplateID=LabwareNames.Item1("Labwr_TemplateId");
                           strTemplateSiteID=LabwareNames.Item1("Labwr_DkSiteId");
                      }
                  }
                  // Get all the labware on this site
                  objDecklayout.TemplateLabwareNames(LabwareObjects);
                  myKeys = LabwareObjects.GetKeys();
                  intInverseCounter=myKeys.GetSize();
                  for(intCounter=1; intCounter<=myKeys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      intInverseCounter=intInverseCounter-1;
                      if(!strTemplateID=="" && !strTemplateSiteID =="")
                      {
                        if(LabwareNames.Item1("Labwr_TemplateId") == strTemplateID && LabwareNames.Item1("Labwr_DkSiteId") == strTemplateSiteID && LabwareNames.Item1("Labwr_Id")!=str_LabwareNameForStack)
                        {
                               strLabwareID=LabwareNames.Item1("Labwr_Id");
                               if(strLabwareID.Find(str_LabwareNameForStack)!=-1) arr_CurrentStack.AddAsLast(strLabwareID);
                               //else o_strLabwareLidID=strLabwareID;
                        }
                      }
                  }
                  objDecklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  EditDecklayout7.ReleaseObject();
                  Parameter.ReleaseObject();
                  LabwareObjects.ReleaseObject();
                  LabwareNames.ReleaseObject();
          }
    }
    o_arr_StackedLabware=arr_CurrentStack;
  }
} // library namespace
