#pragma once
#include "Training\\BF4\\HSLExtensions\\File.hsl"
#include "HSLStrLib.hsl"
#include "Training\\BF4\\ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "ArrayTools\\ArrayTools.hs_"
#include "HSLSeqLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "Training\\BF4\\HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "Training\\BF4\\HSLMthLib.hsl"
#include "Training\\BF4\\HSLTrcLib.hsl"
#include "StringTokenizer\\StrTokenize.hs_"
#include "Training\\BF4\\HSLExtensions\\Array.hsl"
#include "Training\\BF4\\ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "Libraries\\ARW Loading\\ARW_Global.hsl"
#include "Training\\BF4\\HSLExtensions\\Sequence.hsl"
#include "Training\\BF4\\HSLUtilLib2.hsl"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "HSLLabwareStateLib.hsl"
#include "Training\\BF4\\HSLDevLib.hsl"
#include "HSLMETEDLib.hs_"
#include "Training\\BF4\\HSLMECCLib.hs_"

namespace ARW_LOADINGLIB {
  variable file_RunData_DB_DeadVolumeLabware;
  variable file_MM_Preparation_MastermixTube_ID;
  variable file_MM_Preparation_Mastermix_ID;
  variable file_MM_Preparation_VolumeMastermixPerTube;
  variable file_RunData_DB_Units;
  variable file_MM_Preparation_Ratio;
  variable file_MM_Preparation_Component_ID;
  variable file_RunData_DB_MasterMixComponentName;
  variable file_RunData_DB_DeadVolumePercent;
  variable file_RunData_DB_ReagentNameANDLabwareType;
  variable file_MM_Preparation_SourceComponentTube_ID;
  variable file_MM_Preparation_MastermixTube_LabwareID;
  variable file_RunData_DB_CarrierName;
  variable file_MM_Preparation_VolumeComponentPerTube;
  variable file_RunData_DB_LabwareType;
  variable t_strHamiltonMainFileDirectory;
  variable file_RunData_DB_ReagentName;
  variable file_RunData_DB_LabwareName;
  variable file_RunData_DB_SiteID;
  variable file_MM_Preparation_SourceVolumeComponentPerTube;
  variable t_strFullpathFileRunData;
  variable file_RunData_DB_TotalVolume;
  variable t_strLoadingPicturesFileDirectory;
  variable file_RunData_DB_VolumePerWell;
  variable file_RunData_DB_Ratio;
  variable file_RunData_DB_PositionID;
  variable file_MM_Preparation_SourceComponentTube_LabwareID;
  file file_RunData;
  file file_MM_Preparation;
  variable file_RunData_DB_LabwareID;
  variable t_arrSampleCarrierDescription[];
  variable t_arrSampleCarrierID[];
  variable t_arrSampleCarrierNumberOfTubes[];
  variable t_arrCarrierNameDistinct[];
  variable t_intTotalNumberOfMTP24;
  variable t_intTotalNumberOfDWP96;
  variable t_intTotalNumberOf1000Tips;
  variable t_intTotalNumberOfDWP24;
  variable t_intTotalNumberOf300Tips;
  variable t_intTotalNumberOf50Tips;
  variable t_intTotalNumberOfMTP96;
  variable file_RunData_DB_Type;
  sequence t_arrRGTSequencesToAspirate[];
  variable t_intNumberOfRGTSequences;
  variable t_arrRGTTotalVolume[];
  variable t_arrRGTReagentName[];
  variable file_RunData_DB_ExtraVolume;
  variable t_strKitName;
  variable t_strKitProviderKitName;
  variable t_strKitProvider;
  variable t_strCustomDialogSettingsFile;
  variable t_arrInputDialogTip[];
  variable t_arrInputDialogRange[];
  variable t_arrInputDialogResult[];
  variable t_arrInputDialogDescription[];
  variable t_arrInputDialogLabel[];
  variable t_arrInputDialogType[];
  variable t_strPlatformName;
  function ARW_LoadingLib_START( device & i_instrument, variable i_strPlatformName, variable i_strKitProvider, variable i_strKitName ) void ;
  function Add_Labware( device & Instrument, variable i_strLabwareType, variable i_strLabwareName, variable i_intNumberOfUnits, sequence i_seqTemplate ) void ;
  function Add_ReagentInTrough( device & Instrument, variable i_strReagentName, variable i_intNumberOfSamples, variable i_strLabwareTypeId, variable i_fltMaximumContainerVolume, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeReagent, variable i_fltExtraVolume, sequence i_seqTemplate, variable & o_arrVolumePerTrough[] ) void ;
  function Add_ReagentInTubes( device & Instrument, variable i_strReagentName, variable i_intNumberOfSamples, variable i_strLabwareTypeId, variable i_fltMaximumContainerVolume, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeReagent, variable i_fltExtraVolume, sequence i_seqTemplate, variable i_intMinimumNumberOfContainers, variable & o_arrVolumePerTube[] ) void ;
  function Add_SampleTubeCarriers( device & Instrument, variable i_intNumberOfSamples, sequence i_seqSampleTubeCarriers, variable i_strSampleTubeType ) void ;
  function Calculate_TotalVolumeAndSequenceToAspirate( device & Instrument, variable i_strReagentName, variable i_intNumberOfSamples, variable i_strLabwareTypeId, variable i_fltMaximumContainerVolume, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeReagent, variable i_fltExtraVolume, sequence & i_seqTemplate, variable i_intStartingPoint, variable i_intMinimumNumberOfContainers, variable l_blnAdjustSequenceToNumberOfSamples, variable & o_arrVolumePerContainer[] ) void ;
  private function Calculate_TotalVolume_MastermixComponent( variable i_str_MastermixName, variable i_str_MastermixComponentName, variable i_flt_MastermixVolume, variable i_flt_MastermixTotalVolume, variable i_flt_MastermixComponentVolume, variable & o_flt_MastermixComponentTotalVolume, variable & o_flt_Ratio ) void ;
  function Define_VolumePerWell( variable i_strLiquidName, variable i_fltVolumePerSample ) variable ;
  function Define_VolumePerWell_MastermixComponent( variable i_strMastermixLiquidName, variable i_strComponentLiquidName, variable i_fltVolumePerSample ) variable ;
  function Display_Mastermix_Dialog( variable i_strMastermixToDisplay ) void ;
  function Display_SelectProcesses_Dialog( variable i_intMethodSelection, variable & i_arrProcessId[], variable & i_arrProcessCombinations[], variable & i_arrProcessDeactivatedStartPoints[], variable & i_arrProcessDeactivatedStopPoints[], variable & o_int_StartProcess, variable & o_int_StopProcess, variable & o_arr_blnProcessActivationStatus[] ) void ;
  private function Display_StorePlate_Dialog( variable i_strMastermixToDisplay, variable i_strStorePlatePhoto ) void ;
  function Evaluate_ResourcesByCarrier(  ) void ;
  function Load_Carrier( device & Instrument, variable i_strCarrierID, variable i_strMainImageName, variable i_strSubImageName ) void ;
  function Load_SampleTubeCarriers( device & Instrument, variable i_intNumberOfSamples, variable i_strMainImageName, variable i_strSubImageName ) variable ;
  function Load_StackCarrier( device & Instrument, variable i_strCarrierID, variable i_strMainImageName, variable i_strSubImageName, variable & o_arrNumberOfUnitsInEachStack[] ) void ;
  function Load_Tips( device & Instrument, variable i_strTipType, variable i_strMainImageName, variable i_strSubImageName, variable & o_intNumberOfTipsRequired ) void ;
  private function MMPrep_GetSequencesAndVolumes( variable i_strComponentName, sequence & o_seq_AspirateComponents, sequence & o_seq_DispenseComponents, variable & o_arr_fltVolumeComponents[] ) void ;
  function RetrieveCarrierPresence( variable i_strCarrierID, variable & o_blnIsPresent ) void ;
  function Retrieve_50mlTrough_ReagentsVolumesAndSequences( variable & o_arrReagentNames[], variable & o_arrReagentTotalVolumes[], sequence & o_arrReagentSequences[] ) void ;
  private function _Abstract(  ) void ;
  private function _Calculate_TotalVolume_MastermixComponent_( variable i_strMastermixName, variable i_strMastermixComponentName, variable i_fltMastermixVolume, variable i_fltMastermixTotalVolume, variable i_fltMastermixComponentVolume, variable & o_fltMastermixComponentTotalVolume, variable & o_fltRatio ) void ;
  private function _CheckBindReturnValueVectorCustomDialogs( variable i_intBindReturnValue ) void ;
  private function _ConcatenateAllElementsInArray( variable & i_arrElements[], variable i_strSeparator, variable & o_strelementsInArray ) void ;
  private function _ConvertValueToString( variable i_varValue, variable & o_strConvertedValue ) void ;
  private function _DetermineIfSitesAreStacks( device & Instrument, variable i_strCarrierID, variable & o_arrblnIsStack[] ) void ;
  private function _DisplayMessageDialog( variable i_str_Message, variable i_int_icon ) void ;
  private function _Display_LoadCarrier_Dialog( variable i_strImagePath, variable i_strSmallImagePath, variable i_strTextTop, variable & i_arrColumnHeaders[], variable & i_arrDataColumn1[], variable & i_arrDataColumn2[], variable & i_arrDataColumn3[] ) void ;
  private function _FileOpenRunData( variable i_strSQL, variable i_intFileOpenMode ) void ;
  private function _GenerateString( variable i_fltVolume, variable & o_strDescription ) void ;
  private function _GetCarrierAndSiteID( device & Instrument, variable i_strLabwareID, variable & o_strTemplateID, variable & o_strTemplateSiteID ) void ;
  private function _GroupDataInDialog( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[] ) void ;
  function _NumberOfContainers_VolumePerContainer_BasedOnNumberOfSamples( variable i_flt_MaximumVolumePerContainer, variable i_flt_VolumePerSample, variable i_int_NumberOfSamples, variable i_flt_DeadVolumeReagent, variable i_flt_DeadVolumeLabware, variable i_flt_ExtraVolume, variable i_int_DesiredNumberOfContainers, variable & o_int_NumberOfContainers, variable & o_flt_TotalVolumeNeeded, variable & o_arr_fltVolumePerContainer[] ) void ;
  private function _PrintToFile( variable & i_arrCol1[], variable & i_arrCol2[], variable & i_arrCol3[] ) void ;
  private function _Reformat_ValuesForDialog( variable i_fltValueToReformat, variable & o_strvalueFormatted ) void ;
  private function _Reset_FileRunData_Variables(  ) void ;
  private function _RunDATA_Find_Record( variable i_strColumnName, variable i_varValue, variable i_strCarrierName, variable & o_intNumberOfElementsFound ) variable ;
  private function _RunDATA_UpdateRecord( variable i_strSheetName, variable i_strColumnName, variable i_varKeyNewValue, variable i_strColumnReference, variable i_varkeyValueReference ) void ;
  private function _SortElements( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[], variable i_intSortByColumn ) void ;
  private function _UpdateLabwareDataInFile( variable & i_arrValues[], variable i_strColumnName, variable i_varkeyValueReference, variable i_strColumnReference ) void ;
  function _InitLibrary() {
    ARRAYTOOLS::_InitLibrary();
    STRTOKENIZE::_InitLibrary();
    LPQ::_InitLibrary();
  }
  function _ExitLibrary() {
    ARRAYTOOLS::_ExitLibrary();
    STRTOKENIZE::_ExitLibrary();
    LPQ::_ExitLibrary();
  }

  function ARW_LoadingLib_START( device & i_instrument, variable i_strPlatformName, variable i_strKitProvider, variable i_strKitName ) void {
    private variable l_strErrorMessage;
    private variable l_blnFileExists;
    private variable l_strFunctionName;
    private variable l_bln_DeleteFile;
    private variable loopCounter1;
    private variable i_intARWPlatformUsed;
    private variable file_MM_Preparation_ComponentTube_VolumeToAspirate;
    private variable file_MM_Preparation_MastermixTube_VolumeRequested;
    private variable file_MM_Preparation_ComponentTube_VolumeRequested;
    private variable file_MM_Preparation_Component_Ratio;
    private variable file_MM_Preparation_MastermixTube_PositionID;
    private variable file_MM_Preparation_ComponentTube_LabwareID;
    private variable file_MM_Preparation_ComponentTube_PositionID;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    t_strPlatformName = i_strPlatformName;
    t_strKitProvider = i_strKitProvider;
    t_strKitName = i_strKitName;
    t_arrInputDialogDescription.SetSize(0);
    t_arrInputDialogLabel.SetSize(0);
    t_arrInputDialogRange.SetSize(0);
    t_arrInputDialogResult.SetSize(0);
    t_arrInputDialogTip.SetSize(0);
    t_arrInputDialogType.SetSize(0);
    t_strKitProviderKitName = StrConcat12(t_strKitProvider, Translate(" - "), t_strKitName, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    t_strCustomDialogSettingsFile = StrConcat12(Translate(""), Translate(""), Translate(""), Translate(""), Translate("C:\\Program Files (x86)\\Hamilton\\"), t_strPlatformName, Translate("\\"), t_strKitProvider, Translate("\\"), t_strKitName, Translate("\\Files\\CustomDialogFiles\\CustomDialogDefaults.txt"), Translate(""));
    TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, t_strCustomDialogSettingsFile, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    t_strKitProviderKitName = StrConcat4(i_strKitProvider, Translate(" - "), i_strKitName, Translate(""));
    t_strHamiltonMainFileDirectory = Translate("C:\\Program Files (x86)\\HAMILTON\\");
    t_strLoadingPicturesFileDirectory = StrConcat12(t_strHamiltonMainFileDirectory, i_strPlatformName, Translate("\\"), i_strKitProvider, Translate("\\"), i_strKitName, Translate("\\Files\\Pictures\\"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    t_strFullpathFileRunData = StrConcat12(t_strHamiltonMainFileDirectory, i_strPlatformName, Translate("\\"), i_strKitProvider, Translate("\\"), i_strKitName, Translate("\\Files\\"), Translate("RunData.xls"), Translate(""), Translate(""), Translate(""), Translate(""));
    l_blnFileExists = HSLExtensions::File::Exists(t_strFullpathFileRunData);
    l_bln_DeleteFile = ASWGLOBAL::BOOL::FALSE;
    if (l_blnFileExists == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          l_bln_DeleteFile = HSLExtensions::File::Delete(t_strFullpathFileRunData);
          if (l_bln_DeleteFile == ASWGLOBAL::BOOL::FALSE)
          {
            l_strErrorMessage = StrConcat4(Translate("If RunData.xls is in use please, save it as a copy and close the original file: "), Translate("\n"), t_strFullpathFileRunData, Translate(""));
            _DisplayMessageDialog(l_strErrorMessage, 1);
          }
          else
          {
            break;
          }
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_intARWPlatformUsed: "), i_intARWPlatformUsed);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_strKitProvider: "), i_strKitProvider);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_strKitName: "), i_strKitName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_strLoadingPicturesFileDirectory: "), t_strLoadingPicturesFileDirectory);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_strFullpathFileRunData: "), t_strFullpathFileRunData);
    _FileOpenRunData(Translate(""), 3);
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    file_MM_Preparation.AddField("Mastermix_ID", file_MM_Preparation_Mastermix_ID, hslString, 255);
    file_MM_Preparation.AddField("MastermixTube_PositionID", file_MM_Preparation_MastermixTube_PositionID, hslString, 255);
    file_MM_Preparation.AddField("MastermixTube_LabwareID", file_MM_Preparation_MastermixTube_LabwareID, hslString, 255);
    file_MM_Preparation.AddField("MastermixTube_VolumeRequested", file_MM_Preparation_MastermixTube_VolumeRequested, hslFloat);
    file_MM_Preparation.AddField("Component_ID", file_MM_Preparation_Component_ID, hslString, 255);
    file_MM_Preparation.AddField("Component_Ratio", file_MM_Preparation_Component_Ratio, hslFloat);
    file_MM_Preparation.AddField("ComponentTube_PositionID", file_MM_Preparation_ComponentTube_PositionID, hslString, 255);
    file_MM_Preparation.AddField("ComponentTube_LabwareID", file_MM_Preparation_ComponentTube_LabwareID, hslString, 255);
    file_MM_Preparation.AddField("ComponentTube_VolumeRequested", file_MM_Preparation_ComponentTube_VolumeRequested, hslFloat);
    file_MM_Preparation.AddField("ComponentTube_VolumeToAspirate", file_MM_Preparation_ComponentTube_VolumeToAspirate, hslFloat);
    if( 0 == file_MM_Preparation.Open(t_strFullpathFileRunData + " " + "Mastermix_Prep", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullpathFileRunData, "HxMetEdCompCmd");
    }
    if( 0 != file_MM_Preparation.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_MM_Preparation.RemoveFields();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _CheckBindReturnValueVectorCustomDialogs( variable i_intBindReturnValue ) void {
    private variable l_blnSkipDialog;
    private variable l_strErrorMessage;
    private variable l_intBindReturnValue;
    if (i_intBindReturnValue == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      Trace("Bind return value of current Vector custom dialog : ", i_intBindReturnValue);
      if (i_intBindReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::TRUE;
        l_strErrorMessage = Translate("Command did not end successfully ");
      }
      else
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::FALSE;
      }
      if (i_intBindReturnValue == -1)
      {
        l_strErrorMessage = Translate("Sizes of initialization arrays are inhomogeneous. Hint : Check your arrays (sizes have to be equal). ");
      }
      if (i_intBindReturnValue == -2)
      {
        l_strErrorMessage = Translate("Data range / type. Hint : Used range or range in combination with data type is invalid.");
      }
      if (i_intBindReturnValue == -5)
      {
        l_strErrorMessage = Translate("IconSet Directory. Hint : Make sure that the directory named “ASWIconSet” exists inside the directory of ASWStandardDialogs library.");
      }
      if (i_intBindReturnValue == -8)
      {
        l_strErrorMessage = Translate("Dialog has been closed through timeout. Hint : This may or may not be an error, depending on the programmer’s intention. Clicking on a dialog interrupts timer and thus does not lead to a error.");
      }
      if (i_intBindReturnValue == -9)
      {
        l_strErrorMessage = Translate("The dialog was not . Hint : Do not use shortcuts to close the dialog, use buttons from the dialog.");
      }
      if (i_intBindReturnValue == -10)
      {
        l_strErrorMessage = Translate("Library is not initialized. Hint : Initialize library before any other function is called.");
      }
      if (i_intBindReturnValue == -11)
      {
        l_strErrorMessage = Translate("Bad Parameter. Hint : See trace for more information about which parameter caused the error. Adjust the input parameter accordingly.");
      }
      if (i_intBindReturnValue == -1000)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : Please ensure that the com library HamiltonASWGUI.Dialogs.dll is registered.");
      }
      if (i_intBindReturnValue == -1001)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : You cannot execute more dialogs at the same time than defined in the HSL library (default is dialog at a time).");
      }
      Trace("Error message od Vector custom dialog library : ", l_strErrorMessage);
      if (l_blnSkipDialog == ASWGLOBAL::BOOL::FALSE)
      {
        l_intBindReturnValue = VectorCustomDialogs::MessageDialog(Translate("Error message of Vector Custom Dialogs. OK is trying to continue the run ignoring the error - CANCEL will abort the run"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 60, l_strErrorMessage);
        if (l_intBindReturnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
      }
    }
  }

  private function _Reset_FileRunData_Variables(  ) void {
    file_RunData_DB_DeadVolumeLabware = 0;
    file_RunData_DB_DeadVolumePercent = 0;
    file_RunData_DB_TotalVolume = 0;
    file_RunData_DB_VolumePerWell = 0;
    file_RunData_DB_CarrierName = Translate("");
    file_RunData_DB_LabwareName = Translate("");
    file_RunData_DB_LabwareType = Translate("");
    file_RunData_DB_PositionID = Translate("");
    file_RunData_DB_Type = Translate("");
    file_RunData_DB_MasterMixComponentName = Translate("");
    file_RunData_DB_ReagentName = Translate("");
    file_RunData_DB_ReagentNameANDLabwareType = Translate("");
    file_RunData_DB_SiteID = Translate("");
    file_RunData_DB_Units = 0;
    file_RunData_DB_Units = 0;
    file_MM_Preparation_Component_ID = Translate("");
    file_MM_Preparation_Mastermix_ID = Translate("");
    file_MM_Preparation_MastermixTube_ID = Translate("");
    file_MM_Preparation_MastermixTube_LabwareID = Translate("");
    file_MM_Preparation_Ratio = 0.0;
    file_MM_Preparation_SourceComponentTube_ID = Translate("");
    file_MM_Preparation_SourceComponentTube_LabwareID = Translate("");
    file_MM_Preparation_SourceVolumeComponentPerTube = Translate("");
    file_MM_Preparation_VolumeComponentPerTube = 0.0;
    file_MM_Preparation_VolumeMastermixPerTube = 0.0;
    file_MM_Preparation_Component_ID = Translate("");
    file_MM_Preparation_Mastermix_ID = Translate("");
    file_MM_Preparation_MastermixTube_ID = Translate("");
    file_MM_Preparation_MastermixTube_LabwareID = Translate("");
    file_MM_Preparation_Ratio = 0.0;
    file_MM_Preparation_SourceComponentTube_ID = Translate("");
    file_MM_Preparation_SourceComponentTube_LabwareID = Translate("");
    file_MM_Preparation_SourceVolumeComponentPerTube = Translate("");
    file_MM_Preparation_VolumeComponentPerTube = 0.0;
    file_MM_Preparation_VolumeMastermixPerTube = 0.0;
  }

  private function _GetCarrierAndSiteID( device & Instrument, variable i_strLabwareID, variable & o_strTemplateID, variable & o_strTemplateSiteID ) void {
    private variable var_return;
    private variable l_siteID;
    private variable l_strCarrierID;
    private variable l_strlabwareID;
    o_strTemplateID = 0;
    o_strTemplateSiteID = 0;
    l_strlabwareID = i_strLabwareID;
    o_strTemplateID = Translate("");
    o_strTemplateSiteID = Translate("");
    var_return = 0;
    l_siteID = Translate("");
    l_strCarrierID = Translate("");
    HSLLabwrAccess::GetTemplateIDAndTemplateSiteID(Instrument, i_strLabwareID, l_strCarrierID, l_siteID);
    o_strTemplateSiteID = l_siteID;
    if (l_strCarrierID == "default")
    {
      o_strTemplateID = i_strLabwareID;
    }
    else
    {
      o_strTemplateID = l_strCarrierID;
    }
  }

  function Add_Labware( device & Instrument, variable i_strLabwareType, variable i_strLabwareName, variable i_intNumberOfUnits, sequence i_seqTemplate ) void {
    private variable l_strsequenceName;
    private variable l_strFunctionName;
    private variable loopCounter7;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    if (i_intNumberOfUnits > 0)
    {
      l_strsequenceName = SeqGetName(i_seqTemplate);
      _Reset_FileRunData_Variables();
      _FileOpenRunData(Translate(""), 2);
      {
        for(loopCounter7 = 0; loopCounter7 < i_intNumberOfUnits;)
        {
          loopCounter7 = loopCounter7 + 1;
          file_RunData_DB_LabwareType = i_strLabwareType;
          file_RunData_DB_LabwareID = SeqGetLabwareId(i_seqTemplate);
          file_RunData_DB_PositionID = i_seqTemplate.GetCurrentPosition();
          _GetCarrierAndSiteID(Instrument, file_RunData_DB_LabwareID, file_RunData_DB_CarrierName, file_RunData_DB_SiteID);
          file_RunData_DB_Type = Translate("LabwareResource");
          file_RunData_DB_Units = 1;
          file_RunData_DB_LabwareName = i_strLabwareName;
          file_RunData_DB_ReagentNameANDLabwareType = StrConcat12(file_RunData_DB_LabwareName, Translate(" ("), file_RunData_DB_LabwareType, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          if( 0 == file_RunData.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          SeqIncrement(i_seqTemplate, 1);
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  function Evaluate_ResourcesByCarrier(  ) void {
    private variable l_strFunctionName;
    private variable l_strSQLSentence;
    private variable l_intlengthString;
    private variable loopCounter3;
    private file file_1;
    private variable t_intTotalNumberOfPCR96;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_strSQLSentence = Translate("");
    t_arrCarrierNameDistinct.SetSize(0);
    l_strSQLSentence = StrConcat12("SELECT DISTINCT [DB_CarrierName] FROM [RunData$]","","","","","","","","","","","");
    Trace(l_strSQLSentence);
    //l_strSQLSentence = StrConcat12("","","","","","","","","","","","");
    file_1.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
    if( 0 == file_1.Open(t_strFullpathFileRunData + " " + "RunData$", hslRead, l_strSQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullpathFileRunData, "HxMetEdCompCmd");
    }
    {
      loopCounter3 = 0;
      while (
         (file_1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file_1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_intlengthString = StrGetLength(file_RunData_DB_CarrierName);
        if (l_intlengthString != 0)
        {
          t_arrCarrierNameDistinct.AddAsLast(file_RunData_DB_CarrierName);
        }
      }
    }
    if( 0 != file_1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_1.RemoveFields();
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Array of Carriers To Load (t_arrCarrierNameDistinct): "), t_arrCarrierNameDistinct);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), GlobalARW::LabwareType::TIP50, Translate(""), t_intTotalNumberOf50Tips);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), GlobalARW::LabwareType::TIP300, Translate(""), t_intTotalNumberOf300Tips);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), GlobalARW::LabwareType::TIP1000, Translate(""), t_intTotalNumberOf1000Tips);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), GlobalARW::LabwareType::DWP96_Plate, GlobalARW::CarrierType::STACK_Carrier, t_intTotalNumberOfDWP96);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), GlobalARW::LabwareType::DWP24_Plate, GlobalARW::CarrierType::STACK_Carrier, t_intTotalNumberOfDWP24);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), GlobalARW::LabwareType::MTP96_Plate, GlobalARW::CarrierType::STACK_Carrier, t_intTotalNumberOfMTP96);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), GlobalARW::LabwareType::MTP24_Plate, GlobalARW::CarrierType::STACK_Carrier, t_intTotalNumberOfMTP24);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), GlobalARW::LabwareType::PCR96_Plate, GlobalARW::CarrierType::STACK_Carrier, t_intTotalNumberOfPCR96);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_intTotalNumberOf1000Tips: "), t_intTotalNumberOf1000Tips);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_intTotalNumberOf300Tips: "), t_intTotalNumberOf300Tips);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_intTotalNumberOf50Tips: "), t_intTotalNumberOf50Tips);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_intTotalNumberOfDWP96: "), t_intTotalNumberOfDWP96);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_intTotalNumberOfDWP24: "), t_intTotalNumberOfDWP24);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_intTotalNumberOfMTP96: "), t_intTotalNumberOfMTP96);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_intTotalNumberOfMTP24: "), t_intTotalNumberOfMTP24);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_intTotalNumberOfPCR96: "), t_intTotalNumberOfPCR96);
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _RunDATA_Find_Record( variable i_strColumnName, variable i_varValue, variable i_strCarrierName, variable & o_intNumberOfElementsFound ) variable {
    private variable l_intTotalNumberOfElements;
    private variable l_strInputValueVarType;
    private variable l_intRecordCounter;
    private variable l_strSQLSentence;
    private variable loopCounter1;
    private variable l_intRunDataDBUnits;
    o_intNumberOfElementsFound = 0;
    l_intRecordCounter = 0;
    l_strSQLSentence = Translate("");
    l_strInputValueVarType = StrGetType(i_varValue);
    if (i_strCarrierName == "")
    {
      if (l_strInputValueVarType == "s")
      {
        l_strSQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_strColumnName,"] = '",i_varValue,"","","'","","","","","");
        Trace(l_strSQLSentence);
      }
      else
      {
        l_strSQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_strColumnName,"] = ",i_varValue,"","","","","","","","");
        Trace(l_strSQLSentence);
      }
    }
    else
    {
      if (l_strInputValueVarType == "s")
      {
        l_strSQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_strColumnName,"] = '",i_varValue,"' AND [DB_CarrierName] = '",i_strCarrierName,"'","","","","","");
        Trace(l_strSQLSentence);
      }
      else
      {
        l_strSQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_strColumnName,"] = ",i_varValue," AND [DB_CarrierName] = '",i_strCarrierName,"'","","","","","");
        Trace(l_strSQLSentence);
      }
    }
    l_intTotalNumberOfElements = 0;
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter1 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_intRecordCounter = l_intRecordCounter + 1;
        l_intRunDataDBUnits = StrIVal(file_RunData_DB_Units);
        l_intTotalNumberOfElements = l_intTotalNumberOfElements + l_intRunDataDBUnits;
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    if (l_intRecordCounter > 0)
    {
      o_intNumberOfElementsFound = l_intTotalNumberOfElements;
      return (ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      o_intNumberOfElementsFound = 0;
      return (ASWGLOBAL::BOOL::FALSE);
    }
  }

  function Add_SampleTubeCarriers( device & Instrument, variable i_intNumberOfSamples, sequence i_seqSampleTubeCarriers, variable i_strSampleTubeType ) void {
    private variable l_intRemainingTubesLastCarrier;
    private variable l_strSiteIDLong;
    private variable l_strCarrierID;
    private variable l_strsequenceName;
    private variable l_strUnits;
    private variable l_strSiteID;
    private variable loopCounter1;
    private variable l_intNumberOfCarriersToLoad;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable l_arrLabwareType[];
    private variable l_arrCarrierSiteIDs[];
    private variable l_arrSampleCarriersId[];
    private variable l_arrNumberOfExpectedTubesPerCarrier[];
    private variable l_arrCarrierIDs[];
    private variable l_strFunctionName;
    private variable l_arrTokens[];
    private variable l_intMaxNumberOfTubesPerCarrier;
    private variable l_strLabwareID;
    private sequence l_seqDefaultSequence;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    t_arrSampleCarrierID.SetSize(0);
    t_arrSampleCarrierDescription.SetSize(0);
    t_arrSampleCarrierNumberOfTubes.SetSize(0);
    l_arrSampleCarriersId.SetSize(0);
    l_strLabwareID = SeqGetLabwareId(i_seqSampleTubeCarriers);
    HSLLabwrAccess::GetDefaultSequenceForLabwareID(Instrument, l_strLabwareID, 0, l_seqDefaultSequence);
    l_intMaxNumberOfTubesPerCarrier = SeqGetTotal(l_seqDefaultSequence);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Maxmimum Number of Tube per Carrier"), l_intMaxNumberOfTubesPerCarrier);
    l_intNumberOfCarriersToLoad = i_intNumberOfSamples / (l_intMaxNumberOfTubesPerCarrier * 1.0);
    l_intNumberOfCarriersToLoad = MthCeiling(l_intNumberOfCarriersToLoad);
    l_intRemainingTubesLastCarrier = i_intNumberOfSamples % l_intMaxNumberOfTubesPerCarrier;
    if (l_intRemainingTubesLastCarrier == 0)
    {
      l_intRemainingTubesLastCarrier = l_intMaxNumberOfTubesPerCarrier;
    }
    l_arrNumberOfExpectedTubesPerCarrier.SetSize(0);
    if (i_intNumberOfSamples <= l_intMaxNumberOfTubesPerCarrier)
    {
      l_arrNumberOfExpectedTubesPerCarrier.AddAsLast(i_intNumberOfSamples);
    }
    else
    {
      {
        for(loopCounter2 = 0; loopCounter2 < l_intNumberOfCarriersToLoad;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (loopCounter2 == l_intNumberOfCarriersToLoad)
          {
            l_arrNumberOfExpectedTubesPerCarrier.AddAsLast(l_intRemainingTubesLastCarrier);
          }
          else
          {
            l_arrNumberOfExpectedTubesPerCarrier.AddAsLast(l_intMaxNumberOfTubesPerCarrier);
          }
        }
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Array of expected tube per carrier"), l_arrNumberOfExpectedTubesPerCarrier);
    SeqGetLabwareIds(i_seqSampleTubeCarriers, l_arrSampleCarriersId);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arrSampleCarrierID: "), l_arrSampleCarriersId);
    l_arrLabwareType.SetSize(0);
    l_arrLabwareType.AddAsLast(i_strSampleTubeType);
    l_arrCarrierIDs.SetSize(0);
    l_arrCarrierSiteIDs.SetSize(0);
    {
      for(loopCounter3 = 0; loopCounter3 < l_intNumberOfCarriersToLoad;)
      {
        loopCounter3 = loopCounter3 + 1;
        _GetCarrierAndSiteID(Instrument, l_arrSampleCarriersId.ElementAt( loopCounter3 -1), l_strCarrierID, l_strSiteID);
        l_arrCarrierIDs.AddAsLast(l_strCarrierID);
        l_arrCarrierSiteIDs.AddAsLast(l_strSiteID);
      }
    }
    TrcTraceSequence(i_seqSampleTubeCarriers);
    _Reset_FileRunData_Variables();
    l_strsequenceName = SeqGetName(i_seqSampleTubeCarriers);
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfCarriersToLoad;)
      {
        loopCounter1 = loopCounter1 + 1;
        file_RunData_DB_CarrierName = l_arrCarrierIDs.ElementAt( loopCounter1 -1);
        file_RunData_DB_SiteID = l_arrCarrierSiteIDs.ElementAt( loopCounter1 -1);
        file_RunData_DB_Type = Translate("");
        file_RunData_DB_LabwareType = l_arrLabwareType.ElementAt( 1 -1);
        file_RunData_DB_LabwareName = Translate("Samples");
        file_RunData_DB_ReagentName = Translate("");
        file_RunData_DB_ReagentNameANDLabwareType = StrConcat12(file_RunData_DB_LabwareName, Translate(" ("), file_RunData_DB_LabwareType, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        file_RunData_DB_Units = l_arrNumberOfExpectedTubesPerCarrier.ElementAt( loopCounter1 -1);
        l_strSiteIDLong = Translate("");
        file_RunData_DB_LabwareID = file_RunData_DB_CarrierName;
        l_arrTokens.SetSize(0);
        STRTOKENIZE::StrTokenize(file_RunData_DB_SiteID, Translate("-"), l_arrTokens, 0);
        file_RunData_DB_PositionID = l_arrTokens.ElementAt( 2 -1);
        file_RunData_DB_Type = Translate("LabwareResource");
        _FileOpenRunData(Translate(""), 2);
        if( 0 == file_RunData.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
        t_arrSampleCarrierID.AddAsLast(file_RunData_DB_CarrierName);
        t_arrSampleCarrierDescription.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
        _ConvertValueToString(file_RunData_DB_Units, l_strUnits);
        t_arrSampleCarrierNumberOfTubes.AddAsLast(l_strUnits);
      }
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _ConvertValueToString( variable i_varValue, variable & o_strConvertedValue ) void {
    private variable l_strValueType;
    o_strConvertedValue = 0;
    l_strValueType = StrGetType(i_varValue);
    if (l_strValueType == "i")
    {
      o_strConvertedValue = StrIStr(i_varValue);
    }
    if (l_strValueType == "f")
    {
      o_strConvertedValue = StrFStr(i_varValue);
    }
    if (l_strValueType == "s")
    {
      o_strConvertedValue = i_varValue;
    }
  }

  function Load_Carrier( device & Instrument, variable i_strCarrierID, variable i_strMainImageName, variable i_strSubImageName ) void {
    private variable l_intReturnSearchIndex;
    private variable l_strFunctionName;
    private variable l_strSQLSentence;
    private variable l_arrDataColumn3_Descriptions[];
    private variable l_arrDataColumn1_Positions[];
    private variable l_arrDataColumn2_QuantityVolumes[];
    private variable loopCounter5;
    private variable l_intReturnFindTips;
    private variable l_strTempPositionID;
    private variable l_strLenghtRecord;
    private variable l_strSQL;
    private variable l_arrColumnHeaders[];
    private variable l_strTempSiteID;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Carrier requested: "), i_strCarrierID);
    l_intReturnSearchIndex = ARRAYTOOLS::Lookup(t_arrCarrierNameDistinct, i_strCarrierID);
    l_arrDataColumn1_Positions.SetSize(0);
    l_arrDataColumn2_QuantityVolumes.SetSize(0);
    l_arrDataColumn3_Descriptions.SetSize(0);
    Trace("result for searching carrier ID : ",l_intReturnSearchIndex);
    Trace("Carrier ID FOUND: ",i_strCarrierID);
    l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_CarrierName] = '",i_strCarrierID,"'","","","","","","","","","");
    Trace(l_strSQLSentence);
    //l_strSQLSentence = StrConcat12("","","","","","","","","","","","");
    Trace ("t_strFullpathFileRunData: ", t_strFullpathFileRunData);
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter5 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_intReturnFindTips = StrFind(file_RunData_DB_LabwareType, Translate("Tips"));
        if (l_intReturnFindTips < 0)
        {
          l_strTempPositionID = Translate("");
          l_strLenghtRecord = StrGetLength(file_RunData_DB_PositionID);
          if (l_strLenghtRecord < 2)
          {
            l_strTempPositionID = StrConcat4(Translate(""), Translate("0"), file_RunData_DB_PositionID, Translate(""));
          }
          else
          {
            l_strTempPositionID = file_RunData_DB_PositionID;
          }
          if (file_RunData_DB_SiteID == "Multitube_Adapter")
          {
            l_strTempPositionID = StrConcat4(file_RunData_DB_SiteID, Translate(" Pos. "), l_strTempPositionID, Translate(""));
          }
          l_strTempSiteID = Translate("");
          l_strLenghtRecord = StrGetLength(file_RunData_DB_SiteID);
          l_strTempSiteID = StrConcat4(Translate(""), Translate("0"), file_RunData_DB_SiteID, Translate(""));
          if (file_RunData_DB_Type == "LabwareResource")
          {
            l_arrDataColumn1_Positions.AddAsLast(l_strTempSiteID);
            l_arrDataColumn2_QuantityVolumes.AddAsLast(file_RunData_DB_Units);
            l_arrDataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
          }
          if (file_RunData_DB_Type == "Solution")
          {
            l_arrDataColumn1_Positions.AddAsLast(l_strTempPositionID);
            l_arrDataColumn2_QuantityVolumes.AddAsLast(file_RunData_DB_ReagentName);
            l_arrDataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
          }
          if (file_RunData_DB_Type == "SolutionComponent")
          {
            l_arrDataColumn1_Positions.AddAsLast(l_strTempPositionID);
            l_arrDataColumn2_QuantityVolumes.AddAsLast(file_RunData_DB_ReagentName);
            l_arrDataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
          }
          if (file_RunData_DB_Type == "Reagent")
          {
            l_arrDataColumn1_Positions.AddAsLast(l_strTempSiteID);
            l_arrDataColumn2_QuantityVolumes.AddAsLast(file_RunData_DB_ReagentName);
            l_arrDataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
          }
        }
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    l_strSQL = Translate("");
    l_arrColumnHeaders.SetSize(0);
    l_arrColumnHeaders.AddAsLast(Translate("Position"));
    l_arrColumnHeaders.AddAsLast(Translate("Quantity"));
    l_arrColumnHeaders.AddAsLast(Translate("Description"));
    _SortElements(l_arrDataColumn1_Positions, l_arrDataColumn2_QuantityVolumes, l_arrDataColumn3_Descriptions, 1);
    _Display_LoadCarrier_Dialog(i_strMainImageName, i_strSubImageName, Translate("Loading Carrier"), l_arrColumnHeaders, l_arrDataColumn1_Positions, l_arrDataColumn2_QuantityVolumes, l_arrDataColumn3_Descriptions);
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _GenerateString( variable i_fltVolume, variable & o_strDescription ) void {
    private variable l_strTotalVolumePerContainer;
    private variable l_strUnitsVolume;
    o_strDescription = 0;
    _Reformat_ValuesForDialog(i_fltVolume, l_strTotalVolumePerContainer);
    l_strUnitsVolume = Translate("µL");
    o_strDescription = StrConcat12(Translate(""), l_strTotalVolumePerContainer, Translate(""), l_strUnitsVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  }

  private function _SortElements( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[], variable i_intSortByColumn ) void {
    private variable l_intTempLenghtStr;
    private variable l_blnFunctionReturn;
    private variable l_intReturnSearch;
    private variable l_intNumberOfPositionsDefinedAsSingleString;
    private variable l_varColumn1;
    private variable l_varColumn2;
    private variable l_strNewPositionId;
    private variable l_varColumn3;
    private variable loopCounter1;
    private variable l_intSizeArray;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable l_strConcat3Variables;
    private variable l_strLoopCounter2;
    private variable l_strNewPositionIDsFormatted;
    private variable l_arrTokens[];
    private variable l_arrTempSorted[];
    private variable l_arrTokensPositions[];
    private variable l_arrTempNotSorted[];
    private variable l_arrNumeric1to9[];
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Before Column 1: "), io_arrColumn1);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Before Column 2: "), io_arrColumn2);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Before Column 3: "), io_arrColumn3);
    l_arrTempNotSorted.SetSize(0);
    l_intSizeArray=io_arrColumn1.GetSize();
    l_strConcat3Variables = Translate("");
    l_arrNumeric1to9.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < 9;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_strLoopCounter2 = StrIStr(loopCounter2);
        l_arrNumeric1to9.AddAsLast(l_strLoopCounter2);
      }
    }
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSizeArray;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_varColumn1=io_arrColumn1.GetAt(loopCounter1-1);
        l_intReturnSearch = ARRAYTOOLS::Lookup(l_arrNumeric1to9, l_varColumn1);
        if (l_intReturnSearch != 0)
        {
          l_varColumn1 = StrConcat2(Translate("0"), l_varColumn1);
        }
        else
        {
          l_arrTokensPositions.SetSize(0);
          STRTOKENIZE::StrTokenize(l_varColumn1, Translate(","), l_arrTokensPositions, ASWGLOBAL::BOOL::TRUE);
          TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Output of String Tokenize Command: "), l_arrTokensPositions);
          l_intNumberOfPositionsDefinedAsSingleString=l_arrTokensPositions.GetSize();
          l_strNewPositionIDsFormatted = Translate("");
          {
            for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositionsDefinedAsSingleString;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_strNewPositionId = Translate("");
              l_intTempLenghtStr = StrGetLength(l_arrTokensPositions.ElementAt( loopCounter3 -1));
              if (l_intTempLenghtStr == 1)
              {
                l_strNewPositionId = StrConcat2(Translate("0"), l_arrTokensPositions.ElementAt( loopCounter3 -1));
              }
              else
              {
                l_strNewPositionId = l_arrTokensPositions.ElementAt( loopCounter3 -1);
              }
              if (loopCounter3 != l_intNumberOfPositionsDefinedAsSingleString)
              {
                l_strNewPositionIDsFormatted = StrConcat12(l_strNewPositionIDsFormatted, Translate(""), l_strNewPositionId, Translate("\n"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
              else
              {
                l_strNewPositionIDsFormatted = StrConcat12(l_strNewPositionIDsFormatted, Translate(""), l_strNewPositionId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
            }
          }
          l_varColumn1 = l_strNewPositionIDsFormatted;
        }
        l_varColumn2=io_arrColumn2.GetAt(loopCounter1-1);
        l_varColumn3=io_arrColumn3.GetAt(loopCounter1-1);
        if (i_intSortByColumn == 1)
        {
          l_strConcat3Variables = StrConcat12(l_varColumn1, Translate("$"), l_varColumn2, Translate("$"), l_varColumn3, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        if (i_intSortByColumn == 2)
        {
          l_strConcat3Variables = StrConcat12(l_varColumn2, Translate("$"), l_varColumn1, Translate("$"), l_varColumn3, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        if (i_intSortByColumn == 3)
        {
          l_strConcat3Variables = StrConcat12(l_varColumn3, Translate("$"), l_varColumn1, Translate("$"), l_varColumn2, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        l_arrTempNotSorted.AddAsLast(l_strConcat3Variables);
      }
    }
    l_arrTempSorted = HSLExtensions::Array::Sort(l_arrTempNotSorted, 1, l_blnFunctionReturn);
    io_arrColumn1.SetSize(0);
    io_arrColumn2.SetSize(0);
    io_arrColumn3.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSizeArray;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arrTokens.SetSize(0);
        STRTOKENIZE::StrTokenize(l_arrTempSorted.ElementAt( loopCounter1 -1), Translate("$"), l_arrTokens, ASWGLOBAL::BOOL::FALSE);
        if (i_intSortByColumn == 1)
        {
          io_arrColumn1.AddAsLast(l_arrTokens.ElementAt( 1 -1));
          io_arrColumn2.AddAsLast(l_arrTokens.ElementAt( 2 -1));
          io_arrColumn3.AddAsLast(l_arrTokens.ElementAt( 3 -1));
        }
        if (i_intSortByColumn == 2)
        {
          io_arrColumn2.AddAsLast(l_arrTokens.ElementAt( 2 -1));
          io_arrColumn1.AddAsLast(l_arrTokens.ElementAt( 1 -1));
          io_arrColumn3.AddAsLast(l_arrTokens.ElementAt( 3 -1));
        }
        if (i_intSortByColumn == 3)
        {
          io_arrColumn3.AddAsLast(l_arrTokens.ElementAt( 3 -1));
          io_arrColumn1.AddAsLast(l_arrTokens.ElementAt( 1 -1));
          io_arrColumn2.AddAsLast(l_arrTokens.ElementAt( 2 -1));
        }
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("After Column 1: "), io_arrColumn1);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("After Column 2: "), io_arrColumn2);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("After Column 3: "), io_arrColumn3);
  }

  private function _Display_LoadCarrier_Dialog( variable i_strImagePath, variable i_strSmallImagePath, variable i_strTextTop, variable & i_arrColumnHeaders[], variable & i_arrDataColumn1[], variable & i_arrDataColumn2[], variable & i_arrDataColumn3[] ) void {
    private variable l_str_LoadingPicturesFileDirectoryAndSmallImageName;
    private variable l_str_LoadingPicturesFileDirectoryAndImageName;
    private variable l_intReturnDisplayDialog;
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    l_str_LoadingPicturesFileDirectoryAndImageName = StrConcat12(t_strLoadingPicturesFileDirectory, Translate(""), i_strImagePath, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_str_LoadingPicturesFileDirectoryAndSmallImageName = StrConcat12(t_strLoadingPicturesFileDirectory, Translate(""), i_strSmallImagePath, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace("l_str_LoadingPicturesFileDirectoryAndLargeImageName is: ",l_str_LoadingPicturesFileDirectoryAndImageName);
    Trace("l_str_LoadingPicturesFileDirectoryAndSmallImageName is: ",l_str_LoadingPicturesFileDirectoryAndSmallImageName);
    if (i_strSmallImagePath == "")
    {
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, i_strTextTop, Translate("Press OK to Continue, Cancel to Abort"), l_str_LoadingPicturesFileDirectoryAndImageName, Translate(""), 0, i_arrDataColumn1, i_arrDataColumn2, i_arrDataColumn3);
    }
    else
    {
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, i_strTextTop, Translate("Press OK to Continue, Cancel to Abort"), l_str_LoadingPicturesFileDirectoryAndImageName, l_str_LoadingPicturesFileDirectoryAndSmallImageName, 0, i_arrDataColumn1, i_arrDataColumn2, i_arrDataColumn3);
    }
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    if (l_intReturnDisplayDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
  }

  private function _Reformat_ValuesForDialog( variable i_fltValueToReformat, variable & o_strvalueFormatted ) void {
    private variable io_strValueToReformat;
    private variable l_strVariableType;
    private variable io_varValueToReformat;
    private variable l_intStrFindResult;
    private variable l_intNumberOfDecimalPoints;
    o_strvalueFormatted = 0;
    l_strVariableType = StrGetType(i_fltValueToReformat);
    l_intNumberOfDecimalPoints = 2;
    if (l_strVariableType != "s")
    {
      if (l_strVariableType == "i")
      {
        io_varValueToReformat = StrIStr(i_fltValueToReformat);
      }
      if (l_strVariableType == "f")
      {
        i_fltValueToReformat = MthRound(i_fltValueToReformat, l_intNumberOfDecimalPoints);
        io_strValueToReformat = StrConcat2(Translate(""), i_fltValueToReformat);
        l_intStrFindResult = StrFind(io_strValueToReformat, Translate("."));
        if (l_intStrFindResult != -1)
        {
          l_intStrFindResult = l_intStrFindResult + l_intNumberOfDecimalPoints;
          o_strvalueFormatted = StrLeft(io_strValueToReformat, l_intStrFindResult);
        }
        else
        {
          o_strvalueFormatted = io_strValueToReformat;
        }
      }
    }
    else
    {
      i_fltValueToReformat = MthRound(i_fltValueToReformat, l_intNumberOfDecimalPoints);
      io_strValueToReformat = StrConcat2(Translate(""), i_fltValueToReformat);
      l_intStrFindResult = StrFind(io_strValueToReformat, Translate("."));
      if (l_intStrFindResult != -1)
      {
        l_intStrFindResult = l_intStrFindResult + l_intNumberOfDecimalPoints;
        o_strvalueFormatted = StrLeft(io_strValueToReformat, l_intStrFindResult);
      }
      else
      {
        o_strvalueFormatted = io_strValueToReformat;
      }
    }
  }

  function Load_SampleTubeCarriers( device & Instrument, variable i_intNumberOfSamples, variable i_strMainImageName, variable i_strSubImageName ) variable {
    private variable l_strListOfSampleCarrierIDsScanBarcode;
    private variable l_strListOfSampleCarrierIDs;
    private variable l_strFunctionName;
    private variable l_strSQLSentence;
    private variable l_strSampleCarrierKey;
    private variable loopCounter3;
    private variable l_arrDataColumn3_Descriptions[];
    private variable l_arrDataColumn1_Positions[];
    private variable l_arrDataColumn2_QuantityVolumes[];
    private variable l_strRunDataDBUnits;
    private variable l_strPositionOnDeck;
    private variable l_arrColumnHeaders[];
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_arrDataColumn1_Positions.SetSize(0);
    l_arrDataColumn2_QuantityVolumes.SetSize(0);
    l_arrDataColumn3_Descriptions.SetSize(0);
    l_strSampleCarrierKey = Translate("SampleTubeCarrier");
    l_strListOfSampleCarrierIDs = Translate("");
    l_strListOfSampleCarrierIDsScanBarcode = Translate("");
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Sample Carrier ID: "), t_arrSampleCarrierID);
    l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_CarrierName] LIKE '",l_strSampleCarrierKey,"%'","","","","","","","","","");
    Trace(l_strSQLSentence);
    //l_strSQLSentence = StrConcat12("","","","","","","","","","","","");
    Trace ("t_strFullpathFileRunData: ", t_strFullpathFileRunData);
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter3 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData_DB_Units = StrIVal(file_RunData_DB_Units);
        _ConvertValueToString(loopCounter3, l_strPositionOnDeck);
        l_arrDataColumn1_Positions.AddAsLast(l_strPositionOnDeck);
        _ConvertValueToString(file_RunData_DB_Units, l_strRunDataDBUnits);
        l_arrDataColumn2_QuantityVolumes.AddAsLast(l_strRunDataDBUnits);
        l_arrDataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    _SortElements(l_arrDataColumn1_Positions, l_arrDataColumn2_QuantityVolumes, l_arrDataColumn3_Descriptions, 1);
    l_arrColumnHeaders.SetSize(0);
    l_arrColumnHeaders.AddAsLast(Translate("Position"));
    l_arrColumnHeaders.AddAsLast(Translate("Quantity"));
    l_arrColumnHeaders.AddAsLast(Translate("Description"));
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Headers"), l_arrColumnHeaders);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Column 1"), l_arrDataColumn1_Positions);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Column 2"), l_arrDataColumn2_QuantityVolumes);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Column 3"), l_arrDataColumn3_Descriptions);
    _Display_LoadCarrier_Dialog(i_strMainImageName, i_strSubImageName, Translate(""), l_arrColumnHeaders, l_arrDataColumn1_Positions, l_arrDataColumn2_QuantityVolumes, l_arrDataColumn3_Descriptions);
    return (ASWGLOBAL::BOOL::FALSE);
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  function Load_Tips( device & Instrument, variable i_strTipType, variable i_strMainImageName, variable i_strSubImageName, variable & o_intNumberOfTipsRequired ) void {
    private variable l_strFunctionName;
    private variable l_strSQLSentence;
    private variable loopCounter1;
    private variable l_arrDataColumn3_Descriptions[];
    private variable l_arrDataColumn1_Positions[];
    private variable l_arrDataColumn2_QuantityVolumes[];
    private variable l_arrCarrierName[];
    private variable l_strLoadTips;
    private variable l_arrTipSiteID[];
    private variable l_intTotalNumberOfTips;
    private variable l_strTipsSiteIDs;
    private variable l_strTotalNumberOfTips;
    private variable l_strTipsCarrierNames;
    private variable l_arrCarrierName_distinct[];
    private variable l_arrTipSiteID_distinct[];
    private variable l_arrColumnHeaders[];
    o_intNumberOfTipsRequired = 0;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_arrCarrierName.SetSize(0);
    if (i_strTipType == GlobalARW::LabwareType::TIP50)
    {
      l_intTotalNumberOfTips = t_intTotalNumberOf50Tips;
    }
    if (i_strTipType == GlobalARW::LabwareType::TIP300)
    {
      l_intTotalNumberOfTips = t_intTotalNumberOf300Tips;
    }
    if (i_strTipType == GlobalARW::LabwareType::TIP1000)
    {
      l_intTotalNumberOfTips = t_intTotalNumberOf1000Tips;
    }
    l_strLoadTips = StrConcat12(Translate("Tip type: "), i_strTipType, Translate("\nNumber of tips needed: "), l_intTotalNumberOfTips, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_arrTipSiteID.SetSize(0);
    l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_CarrierName] LIKE '%FTR%' AND [DB_LabwareName] LIKE '%Tips%' AND [DB_LabwareType] ='",i_strTipType,"'","","","","","","","","","");
    Trace(l_strSQLSentence);
    //l_strSQLSentence = StrConcat12("","","","","","","","","","","","");
    Trace ("t_strFullpathFileRunData: ", t_strFullpathFileRunData);
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter1 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_arrCarrierName.AddAsLast(file_RunData_DB_CarrierName);
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    if (l_intTotalNumberOfTips > 0)
    {
      l_arrDataColumn1_Positions.SetSize(0);
      l_arrDataColumn2_QuantityVolumes.SetSize(0);
      l_arrDataColumn3_Descriptions.SetSize(0);
      ARRAYTOOLS::get_distinct_from_array(l_arrTipSiteID, l_arrTipSiteID_distinct);
      _ConcatenateAllElementsInArray(l_arrTipSiteID_distinct, Translate(","), l_strTipsSiteIDs);
      _ConvertValueToString(l_intTotalNumberOfTips, l_strTotalNumberOfTips);
      l_arrDataColumn1_Positions.AddAsLast(l_strTipsSiteIDs);
      l_arrDataColumn2_QuantityVolumes.AddAsLast(l_strTotalNumberOfTips);
      l_arrDataColumn3_Descriptions.AddAsLast(i_strTipType);
      ARRAYTOOLS::get_distinct_from_array(l_arrCarrierName, l_arrCarrierName_distinct);
      _ConcatenateAllElementsInArray(l_arrCarrierName_distinct, Translate(";"), l_strTipsCarrierNames);
      l_arrColumnHeaders.SetSize(0);
      l_arrColumnHeaders.AddAsLast(Translate(""));
      l_arrColumnHeaders.AddAsLast(Translate("Quantity"));
      l_arrColumnHeaders.AddAsLast(Translate("Description"));
      _Display_LoadCarrier_Dialog(i_strMainImageName, i_strSubImageName, l_strLoadTips, l_arrColumnHeaders, l_arrDataColumn1_Positions, l_arrDataColumn2_QuantityVolumes, l_arrDataColumn3_Descriptions);
      o_intNumberOfTipsRequired = l_intTotalNumberOfTips;
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _ConcatenateAllElementsInArray( variable & i_arrElements[], variable i_strSeparator, variable & o_strelementsInArray ) void {
    private variable loopCounter1;
    private variable l_intNumberOfElements;
    o_strelementsInArray = 0;
    o_strelementsInArray = Translate("");
    l_intNumberOfElements=i_arrElements.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfElements;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 != l_intNumberOfElements)
        {
          o_strelementsInArray = StrConcat4(o_strelementsInArray, Translate(""), i_arrElements.ElementAt( loopCounter1 -1), i_strSeparator);
        }
        else
        {
          o_strelementsInArray = StrConcat4(o_strelementsInArray, Translate(""), i_arrElements.ElementAt( loopCounter1 -1), Translate(""));
        }
      }
    }
  }

  function Define_VolumePerWell( variable i_strLiquidName, variable i_fltVolumePerSample ) variable {
    private variable l_strFunctionName;
    private variable l_intRecordCounter;
    private variable loopCounter1;
    private variable l_strSQLSentence;
    private variable l_fltTempVolumePerWell;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    MECC::TraceComment(Translate("\n"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_strLiquidName: "), i_strLiquidName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_fltVolumePerSample: "), i_fltVolumePerSample);
    _Reset_FileRunData_Variables();
    l_intRecordCounter = 0;
    l_strSQLSentence = Translate("");
    l_fltTempVolumePerWell = 0;
    l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] = '",i_strLiquidName,"'","","","","","","","","","");
    //Trace(l_strSQLSentence);
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter1 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_intRecordCounter = l_intRecordCounter + 1;
        l_fltTempVolumePerWell = l_fltTempVolumePerWell + file_RunData_DB_VolumePerWell;
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    if (l_intRecordCounter > 0)
    {
      MECC::TraceComment(Translate("Liquid Name Found in DB_ReagentName Column"));
      l_fltTempVolumePerWell = l_fltTempVolumePerWell + i_fltVolumePerSample;
      l_strSQLSentence = StrConcat12("UPDATE [RunData$] SET [DB_VolumePerWell] = ",l_fltTempVolumePerWell," WHERE [DB_ReagentName] = '",i_strLiquidName,"'","","","","","","","");
      Trace(l_strSQLSentence);
      _FileOpenRunData(l_strSQLSentence, 1);
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    else
    {
      MECC::TraceComment(Translate("Liquid Name NOT Found in DB_ReagentName Column"));
      _FileOpenRunData(Translate(""), 2);
      file_RunData_DB_VolumePerWell = i_fltVolumePerSample;
      file_RunData_DB_ReagentName = i_strLiquidName;
      file_RunData_DB_Type = GlobalARW::ReagentType::Reagent;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_Type: "), file_RunData_DB_Type);
      if( 0 == file_RunData.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
    return (i_fltVolumePerSample);
  }

  function Define_VolumePerWell_MastermixComponent( variable i_strMastermixLiquidName, variable i_strComponentLiquidName, variable i_fltVolumePerSample ) variable {
    private variable l_fltCurrentMasterMixVolume;
    private variable l_fltRatio;
    private variable l_strFunctionName;
    private variable l_strReagentType;
    private variable l_blnErrorUpdating;
    private variable l_strSQLSentence;
    private variable loopCounter1;
    private timer l_timeRecoverError;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    _Reset_FileRunData_Variables();
    l_strReagentType = GlobalARW::ReagentType::Solution;
    l_blnErrorUpdating = ASWGLOBAL::BOOL::TRUE;
    {
      loopCounter1 = 0;
      while (l_blnErrorUpdating == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_1 ;
        err.Clear();
        l_fltRatio = 1.0;
        _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Ratio"), l_fltRatio, Translate("DB_ReagentName"), i_strMastermixLiquidName);
        _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Type"), GlobalARW::ReagentType::Solution, Translate("DB_ReagentName"), i_strMastermixLiquidName);
        l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] = '",i_strMastermixLiquidName,"'","","","","","","","","","");
        Trace(l_strSQLSentence);
        _FileOpenRunData(l_strSQLSentence, 1);
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_fltCurrentMasterMixVolume = file_RunData_DB_VolumePerWell;
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
        l_blnErrorUpdating = ASWGLOBAL::BOOL::FALSE;
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          if (loopCounter1 == 3)
          {
            _DisplayMessageDialog(Translate("Cannot update DB. Restart protocol"), 1);
          }
          l_blnErrorUpdating = ASWGLOBAL::BOOL::TRUE;
          if( 0 == l_timeRecoverError.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_timeRecoverError.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }   /* end if from skip handler if no error */
      }
    }
    TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, Translate("Adding to File "), i_fltVolumePerSample, Translate(" µL of "), Translate(""), Translate(""), i_strComponentLiquidName, Translate(" of Mastermix "), i_strMastermixLiquidName, Translate(""), Translate(""));
    _FileOpenRunData(Translate(""), 2);
    file_RunData_DB_VolumePerWell = i_fltVolumePerSample;
    file_RunData_DB_ReagentName = i_strComponentLiquidName;
    file_RunData_DB_ReagentName = StrConcat12(i_strComponentLiquidName, Translate(" - "), i_strMastermixLiquidName, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    file_RunData_DB_Type = GlobalARW::ReagentType::SolutionComponent;
    file_RunData_DB_MasterMixComponentName = i_strComponentLiquidName;
    file_RunData_DB_Ratio = i_fltVolumePerSample / (l_fltCurrentMasterMixVolume * 1.0);
    if( 0 == file_RunData.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
    return (file_RunData_DB_VolumePerWell);
  }

  private function _RunDATA_UpdateRecord( variable i_strSheetName, variable i_strColumnName, variable i_varKeyNewValue, variable i_strColumnReference, variable i_varkeyValueReference ) void {
    private variable l_strTypeKeyNewValue;
    private variable l_bln_errorUpdating;
    private variable l_strTypeKeyValueReference;
    private variable l_strSQLSentence;
    private variable loopCounter1;
    private timer l_timeErrorUpdating;
    l_bln_errorUpdating = ASWGLOBAL::BOOL::TRUE;
    i_strSheetName = StrConcat2(i_strSheetName, Translate("$"));
    {
      loopCounter1 = 0;
      while (l_bln_errorUpdating == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_2 ;
        err.Clear();
        l_strTypeKeyNewValue = StrGetType(i_varKeyNewValue);
        l_strTypeKeyValueReference = StrGetType(i_varkeyValueReference);
        if (l_strTypeKeyNewValue == "s")
        {
          if (l_strTypeKeyValueReference == "s")
          {
            l_strSQLSentence=StrConcat12("UPDATE [",i_strSheetName,"] SET [",i_strColumnName,"] ='",i_varKeyNewValue,"' WHERE [",i_strColumnReference,"] = '",i_varkeyValueReference,"'","");
            Trace(l_strSQLSentence);
          }
          else
          {
            l_strSQLSentence=StrConcat12("UPDATE [",i_strSheetName,"] SET [",i_strColumnName,"] ='",i_varKeyNewValue,"' WHERE [",i_strColumnReference,"] = ",i_varkeyValueReference,"","");
            Trace(l_strSQLSentence);
          }
          file_RunData.AddField(i_strColumnName, i_varKeyNewValue, hslString, 255);
          if( 0 == file_RunData.Open(t_strFullpathFileRunData + " " + i_strSheetName, hslRead, l_strSQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullpathFileRunData, "HxMetEdCompCmd");
          }
        }
        else
        {
          if (l_strTypeKeyValueReference == "s")
          {
            l_strSQLSentence=StrConcat12("UPDATE [",i_strSheetName,"] SET [",i_strColumnName,"] =",i_varKeyNewValue," WHERE [",i_strColumnReference,"] = '",i_varkeyValueReference,"'","");
            Trace(l_strSQLSentence);
          }
          else
          {
            l_strSQLSentence=StrConcat12("UPDATE [",i_strSheetName,"] SET [",i_strColumnName,"] =",i_varKeyNewValue," WHERE [",i_strColumnReference,"] = ",i_varkeyValueReference,"","");
            Trace(l_strSQLSentence);
          }
          if (l_strTypeKeyNewValue == "f")
          {
            file_RunData.AddField(i_strColumnName, i_varKeyNewValue, hslFloat);
            if( 0 == file_RunData.Open(t_strFullpathFileRunData + " " + i_strSheetName, hslRead, l_strSQLSentence) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullpathFileRunData, "HxMetEdCompCmd");
            }
          }
          else
          {
            file_RunData.AddField(i_strColumnName, i_varKeyNewValue, hslInteger);
            if( 0 == file_RunData.Open(t_strFullpathFileRunData + " " + i_strSheetName, hslRead, l_strSQLSentence) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullpathFileRunData, "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
        l_bln_errorUpdating = ASWGLOBAL::BOOL::FALSE;
        errLabel_2 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_bln_errorUpdating = ASWGLOBAL::BOOL::TRUE;
          if( 0 == l_timeErrorUpdating.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_timeErrorUpdating.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }   /* end if from skip handler if no error */
        if (loopCounter1 == 2)
        {
          if (l_bln_errorUpdating == ASWGLOBAL::BOOL::TRUE)
          {
            _DisplayMessageDialog(Translate("Cannot access to RunData File to Update Data. Restart Protocol"), 1);
          }
        }
      }
    }
  }

  function Calculate_TotalVolumeAndSequenceToAspirate( device & Instrument, variable i_strReagentName, variable i_intNumberOfSamples, variable i_strLabwareTypeId, variable i_fltMaximumContainerVolume, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeReagent, variable i_fltExtraVolume, sequence & i_seqTemplate, variable i_intStartingPoint, variable i_intMinimumNumberOfContainers, variable l_blnAdjustSequenceToNumberOfSamples, variable & o_arrVolumePerContainer[] ) void {
    private variable l_blnIsMasterMix;
    private variable loopCounter7;
    private variable l_strErrorMessage;
    private variable l_blnIsMasterMixComponent;
    private variable l_fltTotalVolumeNeeded;
    private variable l_strFunctionName;
    private variable l_blnIsReagent;
    private variable l_strSQLSentence;
    private variable l_intRecordCount;
    private variable l_blnPrepareMasterMixOnDeck;
    private variable l_intTotalNumberOfContainers;
    private variable l_fltTotalVolumeNeededForThisComponent;
    private variable l_strSQLUpdateComponent;
    private variable file1_DB_ReagentNameANDLabwareType;
    private variable file1_DB_PositionID;
    private variable file1_DB_VolumePerWell;
    private variable file1_DB_Ratio;
    private variable file1_DB_MasterMixComponentName;
    private variable file1_DB_LabwareID;
    private variable file1_DB_DeadVolumeLabware;
    private variable file1_DB_SiteID;
    private variable file1_DB_Type;
    private variable file1_DB_CarrierName;
    private variable file1_DB_LabwareType;
    private variable file1_DB_Units;
    private variable file1_DB_ReagentName;
    private variable file1_DB_LabwareName;
    private variable file1_DB_DeadVolumePercent;
    private variable file1_DB_TotalVolume;
    private variable file1_DB_ExtraVolume;
    private file file1;
    private variable loopCounter1;
    private variable l_strLabID;
    private variable l_strCarrierID;
    private variable l_strSiteID;
    private variable l_strDescriptionForDialog;
    private variable l_arrLabIDForMMPrepFile[];
    private variable l_arrPosIDForMMPrepFile[];
    private variable l_arrSeqCreated_tempSiteID[];
    private variable l_arrSeqCreated_tempCarrierID[];
    private variable l_arrSeqCreated_tempLabID[];
    private variable l_arrSeqCreated_tempPosID[];
    private variable l_fltVolumePerContainer;
    private variable l_intNumberOfContainers;
    private variable l_arrconcat_Descriptions[];
    private variable l_strDescription;
    private variable l_intNumberOfDisctinctVolumes;
    private variable loopCounter3;
    private variable l_arrDistinctVolumes[];
    private variable l_intCurrentNumberOfDisctinctVolumes;
    private variable l_arrCurrentVolumes[];
    private variable l_strVolumeForDialog;
    private variable l_strUnitsAndLabwareType;
    private variable l_strColumnReference;
    private variable l_strUnits;
    private variable l_strPosID;
    o_arrVolumePerContainer.SetSize( 0);
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_blnIsMasterMix = ASWGLOBAL::BOOL::FALSE;
    l_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    l_blnIsMasterMixComponent = ASWGLOBAL::BOOL::FALSE;
    l_blnPrepareMasterMixOnDeck = ASWGLOBAL::BOOL::FALSE;
    l_strDescriptionForDialog = Translate("");
    MECC::TraceComment(Translate("INPUT PARAMETERS"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_strReagentName: "), i_strReagentName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_strLabwareTypeId: "), i_strLabwareTypeId);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_fltDeadVolumeLabware: "), i_fltDeadVolumeLabware);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_fltDeadVolumeReagent: "), i_fltDeadVolumeReagent);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_fltMaximumContainerVolume: "), i_fltMaximumContainerVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_intNumberOfSamples: "), i_intNumberOfSamples);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_intMinimumNumberOfContainers: "), i_intMinimumNumberOfContainers);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_intStartingPoint: "), i_intStartingPoint);
    l_strSQLSentence = Translate("");
    l_intRecordCount = 0;
    l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] = '",i_strReagentName,"'","","","","","","","","","");
    Trace(l_strSQLSentence);
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter7 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter7 = loopCounter7 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_intRecordCount = l_intRecordCount + 1;
        if (file_RunData_DB_Type == GlobalARW::ReagentType::Solution)
        {
          l_blnIsMasterMix = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          l_blnIsMasterMix = ASWGLOBAL::BOOL::FALSE;
        }
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    if (l_intRecordCount == 0)
    {
      MECC::TraceComment(Translate("Mastermix Component? (mastermix components are being renamed as: \"NameOfTheComponent - NameOfTheMastermix\")\n"));
      l_strSQLSentence = Translate("");
      l_intRecordCount = 0;
      l_blnIsMasterMixComponent = ASWGLOBAL::BOOL::FALSE;
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_MasterMixComponentName] = '",i_strReagentName,"' AND [DB_Type] = 'SolutionComponent'","","","","","","","","","");
      Trace(l_strSQLSentence);
      _FileOpenRunData(l_strSQLSentence, 1);
      {
        loopCounter7 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter7 = loopCounter7 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_intRecordCount = l_intRecordCount + 1;
          l_blnIsMasterMixComponent = ASWGLOBAL::BOOL::TRUE;
          l_blnPrepareMasterMixOnDeck = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    if (l_intRecordCount != 0)
    {
      if (l_blnPrepareMasterMixOnDeck == ASWGLOBAL::BOOL::TRUE)
      {
      }
      _NumberOfContainers_VolumePerContainer_BasedOnNumberOfSamples(i_fltMaximumContainerVolume, file_RunData_DB_VolumePerWell, i_intNumberOfSamples, i_fltDeadVolumeReagent, i_fltDeadVolumeLabware, i_fltExtraVolume, i_intMinimumNumberOfContainers, l_intTotalNumberOfContainers, l_fltTotalVolumeNeeded, o_arrVolumePerContainer);
      _ConvertValueToString(l_intTotalNumberOfContainers, l_strUnits);
      if (l_blnIsMasterMixComponent == ASWGLOBAL::BOOL::TRUE)
      {
        l_strSQLSentence = StrConcat2("UPDATE [RunData$] SET","");
        l_strSQLSentence = StrConcat4(l_strSQLSentence," [DB_TotalVolume] = ",l_fltTotalVolumeNeeded,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_Units] = '",l_strUnits,"'");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumeLabware] = ",i_fltDeadVolumeLabware,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumePercent] = ",i_fltDeadVolumeReagent,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ExtraVolume] = ",i_fltExtraVolume,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ReagentNameANDLabwareType] = '",l_strDescriptionForDialog,"'");
        l_strSQLSentence = StrConcat4(l_strSQLSentence," WHERE [DB_MasterMixComponentName] = '",i_strReagentName,"'");
        Trace(l_strSQLSentence);
      }
      else
      {
        if (l_blnIsMasterMix == ASWGLOBAL::BOOL::TRUE)
        {
          l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] LIKE '%- ",i_strReagentName,"'","","","","","","","","","");
          Trace(l_strSQLSentence);
          _FileOpenRunData(l_strSQLSentence, 1);
          {
            loopCounter7 = 0;
            while (
               (file_RunData.Eof() == 0)
            )
            {
              loopCounter7 = loopCounter7 + 1;
              if( 0 == file_RunData.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              l_fltTotalVolumeNeededForThisComponent = l_fltTotalVolumeNeeded * file_RunData_DB_Ratio;
              l_strSQLUpdateComponent = Translate("");
              l_strSQLUpdateComponent = StrConcat2("UPDATE [RunData$] SET","");
              l_strSQLUpdateComponent = StrConcat4(l_strSQLUpdateComponent," [DB_TotalVolume] = ",l_fltTotalVolumeNeededForThisComponent,"");
              l_strSQLUpdateComponent = StrConcat4(l_strSQLUpdateComponent," WHERE [DB_ReagentName] = '",file_RunData_DB_ReagentName,"'");
              Trace(l_strSQLUpdateComponent);
              file1.AddField("DB_VolumePerWell", file1_DB_VolumePerWell, hslFloat);
              file1.AddField("DB_DeadVolumeLabware", file1_DB_DeadVolumeLabware, hslFloat);
              file1.AddField("DB_DeadVolumePercent", file1_DB_DeadVolumePercent, hslFloat);
              file1.AddField("DB_TotalVolume", file1_DB_TotalVolume, hslFloat);
              file1.AddField("DB_ExtraVolume", file1_DB_ExtraVolume, hslFloat);
              file1.AddField("DB_CarrierName", file1_DB_CarrierName, hslString, 255);
              file1.AddField("DB_SiteID", file1_DB_SiteID, hslString, 255);
              file1.AddField("DB_Units", file1_DB_Units, hslString, 255);
              file1.AddField("DB_LabwareType", file1_DB_LabwareType, hslString, 255);
              file1.AddField("DB_LabwareName", file1_DB_LabwareName, hslString, 255);
              file1.AddField("DB_LabwareID", file1_DB_LabwareID, hslString, 255);
              file1.AddField("DB_PositionID", file1_DB_PositionID, hslString, 255);
              file1.AddField("DB_ReagentName", file1_DB_ReagentName, hslString, 255);
              file1.AddField("DB_MasterMixComponentName", file1_DB_MasterMixComponentName, hslString, 255);
              file1.AddField("DB_Type", file1_DB_Type, hslString, 255);
              file1.AddField("DB_Ratio", file1_DB_Ratio, hslFloat);
              file1.AddField("DB_ReagentNameANDLabwareType", file1_DB_ReagentNameANDLabwareType, hslString, 255);
              if( 0 == file1.Open(t_strFullpathFileRunData + " " + "RunData$", hslRead, l_strSQLUpdateComponent) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullpathFileRunData, "HxMetEdCompCmd");
              }
            }
          }
          l_strSQLSentence = StrConcat2("UPDATE [RunData$] SET","");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," [DB_TotalVolume] = ",l_fltTotalVolumeNeeded,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_Units] = '",l_strUnitsAndLabwareType,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumeLabware] = ",i_fltDeadVolumeLabware,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumePercent] = ",i_fltDeadVolumeReagent,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ExtraVolume] = ",i_fltExtraVolume,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ReagentNameANDLabwareType] = '",l_strDescriptionForDialog,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," WHERE [DB_ReagentName] = '",i_strReagentName,"'");
          Trace(l_strSQLSentence);
        }
        else
        {
          l_strSQLSentence = StrConcat2("UPDATE [RunData$] SET","");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," [DB_TotalVolume] = ",l_fltTotalVolumeNeeded,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_Units] = '",l_strUnits,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumeLabware] = ",i_fltDeadVolumeLabware,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumePercent] = ",i_fltDeadVolumeReagent,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ExtraVolume] = ",i_fltExtraVolume,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ReagentNameANDLabwareType] = '",l_strDescriptionForDialog,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," WHERE [DB_ReagentName] = '",i_strReagentName,"'");
          Trace(l_strSQLSentence);
        }
      }
      _FileOpenRunData(l_strSQLSentence, 1);
      l_arrconcat_Descriptions.SetSize(0);
      l_arrLabIDForMMPrepFile.SetSize(0);
      l_arrPosIDForMMPrepFile.SetSize(0);
      l_arrSeqCreated_tempLabID.SetSize(0);
      l_arrSeqCreated_tempPosID.SetSize(0);
      l_arrSeqCreated_tempCarrierID.SetSize(0);
      l_arrSeqCreated_tempSiteID.SetSize(0);
      l_strPosID = SeqGetPositionId(i_seqTemplate);
      l_arrSeqCreated_tempPosID.AddAsLast(l_strPosID);
      {
        loopCounter1 = 0;
        while (
           (i_seqTemplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, i_seqTemplate, 1);
          loopCounter1 = loopCounter1 + 1;
          l_strLabID = SeqGetLabwareId(i_seqTemplate);
          _GetCarrierAndSiteID(Instrument, l_strLabID, l_strCarrierID, l_strSiteID);
          l_arrSeqCreated_tempLabID.AddAsLast(l_strLabID);
          l_arrSeqCreated_tempSiteID.AddAsLast(l_strSiteID);
          l_arrSeqCreated_tempCarrierID.AddAsLast(l_strCarrierID);
          SeqIncrement(i_seqTemplate, 1);
          if (
             (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
        i_seqTemplate.SetCurrentPosition(1);
      }
      l_fltVolumePerContainer = 0.0;
      l_intNumberOfContainers = 0;
      l_strDescription = Translate("");
      ARRAYTOOLS::get_distinct_from_array(o_arrVolumePerContainer, l_arrDistinctVolumes);
      l_intNumberOfDisctinctVolumes=l_arrDistinctVolumes.GetSize();
      {
        for(loopCounter3 = 0; loopCounter3 < l_intNumberOfDisctinctVolumes;)
        {
          loopCounter3 = loopCounter3 + 1;
          ARRAYTOOLS::ArrayVLookUp(o_arrVolumePerContainer, o_arrVolumePerContainer, l_arrDistinctVolumes.ElementAt( loopCounter3 -1), l_arrCurrentVolumes);
          l_intCurrentNumberOfDisctinctVolumes=l_arrCurrentVolumes.GetSize();
          _GenerateString(l_arrDistinctVolumes.ElementAt( loopCounter3 -1), l_strVolumeForDialog);
          if (l_intNumberOfDisctinctVolumes == 1)
          {
            l_strDescription = StrConcat12(l_strDescription, Translate(""), l_intCurrentNumberOfDisctinctVolumes, Translate(" x "), Translate(""), Translate(" ["), l_strVolumeForDialog, Translate("]"), Translate(" --- "), i_strLabwareTypeId, Translate(""), Translate(""));
          }
          else
          {
            if (loopCounter3 == l_intNumberOfDisctinctVolumes)
            {
              l_strDescription = StrConcat12(l_strDescription, Translate(""), l_intCurrentNumberOfDisctinctVolumes, Translate(" x "), Translate(""), Translate(" ["), l_strVolumeForDialog, Translate("]"), Translate(" --- "), i_strLabwareTypeId, Translate(""), Translate(""));
            }
            else
            {
              l_strDescription = StrConcat12(l_strDescription, Translate(""), l_intCurrentNumberOfDisctinctVolumes, Translate(" x "), Translate(""), Translate(" ["), l_strVolumeForDialog, Translate("]"), Translate(" --- "), i_strLabwareTypeId, Translate("\n"), Translate(""));
            }
          }
        }
      }
      l_arrconcat_Descriptions.AddAsLast(l_strDescription);
      if (l_blnIsMasterMixComponent != ASWGLOBAL::BOOL::TRUE)
      {
        l_strColumnReference = Translate("DB_ReagentName");
      }
      else
      {
        l_strColumnReference = Translate("DB_MasterMixComponentName");
      }
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempCarrierID, Translate("DB_CarrierName"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempSiteID, Translate("DB_SiteID"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempLabID, Translate("DB_LabwareType"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempLabID, Translate("DB_LabwareID"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempPosID, Translate("DB_PositionID"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrconcat_Descriptions, Translate("DB_ReagentNameANDLabwareType"), i_strReagentName, l_strColumnReference);
    }
    else
    {
      l_strErrorMessage = StrConcat12(Translate("xxxxxxxxxxxxxxxxxxxxxx  Reagent: "), i_strReagentName, Translate(" DOES NOT EXIST"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(""), l_strErrorMessage);
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
    return;
  }

  private function _Calculate_TotalVolume_MastermixComponent_( variable i_strMastermixName, variable i_strMastermixComponentName, variable i_fltMastermixVolume, variable i_fltMastermixTotalVolume, variable i_fltMastermixComponentVolume, variable & o_fltMastermixComponentTotalVolume, variable & o_fltRatio ) void {
    private variable l_fltRatio;
    private variable l_fltMastermixComponentTotalVolume;
    o_fltMastermixComponentTotalVolume = 0;
    o_fltRatio = 0;
    l_fltMastermixComponentTotalVolume = 0.0;
    l_fltRatio = 0.0;
    TrcTrace("------- Calculate Volume for the next Mastermix Component ",i_strMastermixComponentName);
    TrcTrace("----------------------------------Component of Mastermix: ",i_strMastermixName);
    TrcTrace("---------------------------------- i_fltMastermixComponentVolume: ",i_fltMastermixComponentVolume);
    TrcTrace("---------------------------------- i_fltMastermixTotalVolume: ",i_fltMastermixTotalVolume);
    TrcTrace("---------------------------------- i_fltMastermixVolume: ",i_fltMastermixVolume);
    l_fltMastermixComponentTotalVolume = (i_fltMastermixComponentVolume * i_fltMastermixTotalVolume)/i_fltMastermixVolume;
    TrcTrace("Volume calculated (ul): ", l_fltMastermixComponentTotalVolume);
    l_fltRatio = (i_fltMastermixComponentVolume / i_fltMastermixVolume);
    TrcTrace("Ratio: ", l_fltRatio);
    o_fltMastermixComponentTotalVolume = l_fltMastermixComponentTotalVolume;
    o_fltRatio = l_fltRatio;
  }

  private function MMPrep_GetSequencesAndVolumes( variable i_strComponentName, sequence & o_seq_AspirateComponents, sequence & o_seq_DispenseComponents, variable & o_arr_fltVolumeComponents[] ) void {
    private variable l_strFunctionName;
    private variable l_strSQLSentence;
    private variable loopCounter1;
    private variable l_arrSolution[];
    private variable l_strCurrentSolutionName;
    private variable l_arrSolutionDistinct[];
    private variable l_intNumberOfSolutions;
    private variable loopCounter2;
    private variable l_arrSolutionComponents[];
    private variable l_arrSolutionComponents_Ratio[];
    private variable l_arrSolutionComponents_LabID[];
    private variable l_arrSolutionLabID[];
    private variable l_arrSolutionPosID[];
    { sequence __temp; o_seq_AspirateComponents = __temp; }
    { sequence __temp; o_seq_DispenseComponents = __temp; }
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_strSQLSentence = Translate("");
    l_strCurrentSolutionName = Translate("");
    l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Type] = 'Solution'","","","","","","","","","","","");
    Trace(l_strSQLSentence);
    _FileOpenRunData(l_strSQLSentence, 1);
    l_arrSolution.SetSize(0);
    l_arrSolutionLabID.SetSize(0);
    l_arrSolutionPosID.SetSize(0);
    {
      loopCounter1 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_arrSolution.AddAsLast(file_RunData_DB_ReagentName);
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    ARRAYTOOLS::get_distinct_from_array(l_arrSolution, l_arrSolutionDistinct);
    l_intNumberOfSolutions=l_arrSolutionDistinct.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < l_intNumberOfSolutions;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_arrSolutionComponents.SetSize(0);
        l_arrSolutionComponents_Ratio.SetSize(0);
        l_arrSolutionComponents_LabID.SetSize(0);
        l_strCurrentSolutionName=l_arrSolutionDistinct.GetAt(loopCounter2-1);
        l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Type] = 'SolutionComponent' AND [DB_ReagentName] LIKE '%",l_strCurrentSolutionName,"'","","","","","","","","","");
        Trace(l_strSQLSentence);
        _FileOpenRunData(l_strSQLSentence, 1);
        {
          loopCounter1 = 0;
          while (
             (file_RunData.Eof() == 0)
          )
          {
            loopCounter1 = loopCounter1 + 1;
            if( 0 == file_RunData.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_arrSolutionComponents.AddAsLast(file_RunData_DB_MasterMixComponentName);
            l_arrSolutionComponents_Ratio.AddAsLast(file_RunData_DB_Ratio);
          }
        }
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
      }
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  function Retrieve_50mlTrough_ReagentsVolumesAndSequences( variable & o_arrReagentNames[], variable & o_arrReagentTotalVolumes[], sequence & o_arrReagentSequences[] ) void {
    private variable loopCounter1;
    private sequence l_seqCurrentSeq;
    o_arrReagentNames.SetSize( 0);
    o_arrReagentTotalVolumes.SetSize( 0);
    o_arrReagentSequences.SetSize( 0);
    o_arrReagentTotalVolumes=t_arrRGTTotalVolume;
    o_arrReagentNames=t_arrRGTReagentName;
    o_arrReagentSequences=t_arrRGTSequencesToAspirate;
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arrRGTTotalVolume: "), t_arrRGTTotalVolume);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arrRGTReagentName: "), t_arrRGTReagentName);
    t_intNumberOfRGTSequences=t_arrRGTSequencesToAspirate.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < t_intNumberOfRGTSequences;)
      {
        loopCounter1 = loopCounter1 + 1;
        TrcTrace(Translate("Sequence at index: "), loopCounter1);
        l_seqCurrentSeq=t_arrRGTSequencesToAspirate.GetAt(loopCounter1-1);
        TrcTraceSequence(l_seqCurrentSeq);
      }
    }
  }

  private function _PrintToFile( variable & i_arrCol1[], variable & i_arrCol2[], variable & i_arrCol3[] ) void {
    private variable l_strMasterMixSummary;
    private variable l_intNumberOfRecords;
    private variable loopCounter1;
    private variable file1_Reagent_Name;
    private variable file1_Volume_Required;
    private variable file1_Description;
    private file file1;
    l_intNumberOfRecords=i_arrCol1.GetSize();
    l_strMasterMixSummary = StrConcat4(Translate("C:\\Program Files (x86)\\HAMILTON\\Logfiles\\"), Translate("MastermixSummary"), Translate(".csv"), Translate(""));
    file1.AddField("Reagent Name", file1_Reagent_Name, hslString, 255);
    file1.AddField("Volume Required", file1_Volume_Required, hslString, 255);
    file1.AddField("Description", file1_Description, hslString, 255);
    file1.SetDelimiter(";");
    if( 0 == file1.Open(l_strMasterMixSummary, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strMasterMixSummary, "HxMetEdCompCmd");
    }
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfRecords;)
      {
        loopCounter1 = loopCounter1 + 1;
        file1_Reagent_Name=i_arrCol1.GetAt(loopCounter1-1);
        file1_Volume_Required=i_arrCol2.GetAt(loopCounter1-1);
        file1_Description=i_arrCol3.GetAt(loopCounter1-1);
        if( 0 == file1.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
  }

  function Display_Mastermix_Dialog( variable i_strMastermixToDisplay ) void {
    private variable l_strBottomText;
    private variable l_intNumberOfMastermixToDisplay;
    private variable l_intReturnErrorDialog;
    private variable l_strFullpathLoadingPicture;
    private variable file_RunData_DB_MasterMixComponentName_reformatted;
    private variable l_intReturnDisplayDialog;
    private variable l_strSQLSentence;
    private variable loopCounter4;
    private variable l_strTotalVolume;
    private variable l_arrMastermixNames[];
    private variable l_arrMastermixVolumes[];
    private variable l_arrColumnHeaders[];
    private variable l_arrMastermixDescription[];
    l_arrMastermixNames.SetSize(0);
    l_arrMastermixVolumes.SetSize(0);
    l_arrMastermixDescription.SetSize(0);
    if (i_strMastermixToDisplay == "ALL")
    {
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Type] <> 'Reagent' AND [DB_Type] <> 'LabwareResource'","","","","","","","","","","","");
      Trace(l_strSQLSentence);
    }
    else
    {
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Type] <> 'Reagent' AND [DB_Type] <> 'LabwareResource' AND [DB_ReagentName] LIKE '%",i_strMastermixToDisplay,"'","","","","","","","","","");
      Trace(l_strSQLSentence);
    }
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter4 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter4 = loopCounter4 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (file_RunData_DB_Type == GlobalARW::ReagentType::SolutionComponent)
        {
          file_RunData_DB_MasterMixComponentName_reformatted = StrConcat4(Translate("---  "), file_RunData_DB_MasterMixComponentName, Translate(""), Translate(""));
          l_arrMastermixNames.AddAsLast(file_RunData_DB_MasterMixComponentName_reformatted);
        }
        else
        {
          l_arrMastermixNames.AddAsLast(file_RunData_DB_ReagentName);
        }
        _GenerateString(file_RunData_DB_TotalVolume, l_strTotalVolume);
        l_arrMastermixDescription.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
        l_arrMastermixVolumes.AddAsLast(l_strTotalVolume);
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    l_intNumberOfMastermixToDisplay=l_arrMastermixNames.GetSize();
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("MasterMix Names"), l_arrMastermixNames);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("MasterMix Volumes"), l_arrMastermixVolumes);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("MasterMix Descriptions"), l_arrMastermixDescription);
    if (l_intNumberOfMastermixToDisplay > 0)
    {
      l_arrColumnHeaders.SetSize(0);
      l_arrColumnHeaders.AddAsLast(Translate("Name"));
      l_arrColumnHeaders.AddAsLast(Translate("Volume (µL)"));
      l_arrColumnHeaders.AddAsLast(Translate("Description"));
      l_intReturnErrorDialog = VectorCustomDialogs::LoadingDialogSetResources(l_arrColumnHeaders);
      _CheckBindReturnValueVectorCustomDialogs(l_intReturnErrorDialog);
      l_strBottomText = StrConcat4(Translate("A .csv file will be automatically created at following directory : "), Translate("\nC:\\Program Files (x86)\\HAMILTON\\Logfiles\\"), Translate(""), Translate(""));
      l_strFullpathLoadingPicture = StrConcat12(t_strLoadingPicturesFileDirectory, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("MasterMix.png"), Translate(""), Translate(""), Translate(""), Translate(""));
      l_arrMastermixDescription = HSLExtensions::Array::ConvertToStringArray(l_arrMastermixDescription);
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate("Master Mix Preparation"), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Prepare Mastermix according to instructions below. Press OK to Continue"), l_strBottomText, l_strFullpathLoadingPicture, Translate(""), 300, l_arrMastermixNames, l_arrMastermixVolumes, l_arrMastermixDescription);
      _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
      _PrintToFile(l_arrMastermixNames, l_arrMastermixVolumes, l_arrMastermixDescription);
    }
  }

  private function _FileOpenRunData( variable i_strSQL, variable i_intFileOpenMode ) void {
    private variable l_strTableName;
    if (i_intFileOpenMode == 1)
    {
      l_strTableName = Translate("RunData$");
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_ExtraVolume", file_RunData_DB_ExtraVolume, hslFloat);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslString, 255);
      file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_LabwareID", file_RunData_DB_LabwareID, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_Type", file_RunData_DB_Type, hslString, 255);
      file_RunData.AddField("DB_Ratio", file_RunData_DB_Ratio, hslFloat);
      file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
      if( 0 == file_RunData.Open(t_strFullpathFileRunData + " " + l_strTableName, hslRead, i_strSQL) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullpathFileRunData, "HxMetEdCompCmd");
      }
    }
    if (i_intFileOpenMode == 2)
    {
      l_strTableName = Translate("RunData$");
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_ExtraVolume", file_RunData_DB_ExtraVolume, hslFloat);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslString, 255);
      file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_LabwareID", file_RunData_DB_LabwareID, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_Type", file_RunData_DB_Type, hslString, 255);
      file_RunData.AddField("DB_Ratio", file_RunData_DB_Ratio, hslFloat);
      file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
      if( 0 == file_RunData.Open(t_strFullpathFileRunData + " " + l_strTableName, hslAppend, i_strSQL) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullpathFileRunData, "HxMetEdCompCmd");
      }
    }
    if (i_intFileOpenMode == 3)
    {
      l_strTableName = Translate("RunData");
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_ExtraVolume", file_RunData_DB_ExtraVolume, hslFloat);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslString, 255);
      file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_LabwareID", file_RunData_DB_LabwareID, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_Type", file_RunData_DB_Type, hslString, 255);
      file_RunData.AddField("DB_Ratio", file_RunData_DB_Ratio, hslFloat);
      file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
      if( 0 == file_RunData.Open(t_strFullpathFileRunData + " " + l_strTableName, hslWrite, i_strSQL) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullpathFileRunData, "HxMetEdCompCmd");
      }
    }
  }

  private function _UpdateLabwareDataInFile( variable & i_arrValues[], variable i_strColumnName, variable i_varkeyValueReference, variable i_strColumnReference ) void {
    private variable l_arrDistinctValues[];
    private variable l_intSizeArray;
    private variable l_strArrayData;
    private variable loopCounter1;
    private variable l_strSQLSentence;
    ARRAYTOOLS::get_distinct_from_array(i_arrValues, l_arrDistinctValues);
    l_intSizeArray=l_arrDistinctValues.GetSize();
    l_strSQLSentence = Translate("");
    l_strArrayData = Translate("");
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSizeArray;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          l_strArrayData = StrConcat12(l_strArrayData, Translate(""), l_arrDistinctValues.ElementAt( loopCounter1 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          l_strArrayData = StrConcat12(l_strArrayData, Translate(","), l_arrDistinctValues.ElementAt( loopCounter1 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
    l_strSQLSentence=StrConcat12("UPDATE [RunData$] SET [",i_strColumnName,"] ='",l_strArrayData,"' WHERE [",i_strColumnReference,"] = '",i_varkeyValueReference,"'","","","");
    Trace(l_strSQLSentence);
    _FileOpenRunData(l_strSQLSentence, 1);
  }

  function Display_SelectProcesses_Dialog( variable i_intMethodSelection, variable & i_arrProcessId[], variable & i_arrProcessCombinations[], variable & i_arrProcessDeactivatedStartPoints[], variable & i_arrProcessDeactivatedStopPoints[], variable & o_int_StartProcess, variable & o_int_StopProcess, variable & o_arr_blnProcessActivationStatus[] ) void {
    private variable loopCounter7;
    private variable l_intReturnLookUpProcessExistsInCombination;
    private variable loopCounter9;
    private variable l_intNumberOfDeactivatedStartPoints;
    private variable l_intCurrentProcess;
    private variable l_strFunctionName;
    private variable l_strDeactivatedStopProcessID;
    private variable l_strWrapOrientationElementsInDialog;
    private variable l_intProcessCounter;
    private variable l_intReturnDisplayDialog;
    private variable l_intTotalNumberOfProcesses;
    private variable l_intNumberOfDeactivatedStopPoints;
    private variable l_intNumberOfProcessInCombination;
    private variable l_intStartProcess;
    private variable loopCounter1;
    private variable l_strProcessCombination;
    private variable l_strDeactivatedStartProcessID;
    private variable l_strTopText;
    private variable l_intStopProcess;
    private variable loopCounter3;
    private variable l_intTotalNumberOfProcessPlusStartProcess;
    private variable loopCounter4;
    private variable l_blnDeactivatedSTARProcessDetected;
    private variable l_intReturnLookUpProcessIsDeactivated;
    private variable l_intReturnSearchProcessDeactivated;
    private variable loopCounter5;
    private variable l_intSelectFirstProcessActivated;
    private variable l_arrToolTips[];
    private variable l_arrIsSelected[];
    private variable l_arrGroupName[];
    private variable l_arrLabels[];
    private variable l_arrProcessCombination[];
    private variable l_arrProcessToShowOnSTARTDialog[];
    private variable l_arrIsEditable[];
    private variable l_arrProcessToShowOnSTOPDialog[];
    o_int_StartProcess = 0;
    o_int_StopProcess = 0;
    o_arr_blnProcessActivationStatus.SetSize( 0);
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_intMethodSelection: "), i_intMethodSelection);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("i_arrProcessId: "), i_arrProcessId);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("i_arrProcessCombinations: "), i_arrProcessCombinations);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("i_arrProcessDeactivatedStartPoints: "), i_arrProcessDeactivatedStartPoints);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("i_arrProcessDeactivatedStopPoints: "), i_arrProcessDeactivatedStopPoints);
    o_arr_blnProcessActivationStatus.SetSize(0);
    l_arrProcessToShowOnSTARTDialog.SetSize(0);
    l_arrProcessToShowOnSTOPDialog.SetSize(0);
    l_arrGroupName.SetSize(0);
    l_arrLabels.SetSize(0);
    l_arrIsEditable.SetSize(0);
    l_arrIsSelected.SetSize(0);
    l_arrToolTips.SetSize(0);
    l_strWrapOrientationElementsInDialog = VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical;
    l_intStartProcess = 0;
    l_intStopProcess = 0;
    l_intProcessCounter = 0;
    l_intTotalNumberOfProcesses=i_arrProcessId.GetSize();
    l_blnDeactivatedSTARProcessDetected = ASWGLOBAL::BOOL::FALSE;
    l_intSelectFirstProcessActivated = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < l_intTotalNumberOfProcesses;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arrGroupName.AddAsLast(Translate("Start Process"));
        l_intReturnSearchProcessDeactivated = ARRAYTOOLS::Lookup(i_arrProcessDeactivatedStartPoints, loopCounter1);
        if (l_intReturnSearchProcessDeactivated > 0)
        {
          l_arrProcessToShowOnSTARTDialog.AddAsLast(ASWGLOBAL::BOOL::FALSE);
          l_arrIsEditable.AddAsLast(0);
          l_arrIsSelected.AddAsLast(0);
        }
        else
        {
          l_arrProcessToShowOnSTARTDialog.AddAsLast(ASWGLOBAL::BOOL::TRUE);
          l_intSelectFirstProcessActivated = l_intSelectFirstProcessActivated + 1;
          l_arrIsEditable.AddAsLast(1);
          if (l_intSelectFirstProcessActivated == 1)
          {
            l_arrIsSelected.AddAsLast(1);
          }
          else
          {
            l_arrIsSelected.AddAsLast(0);
          }
        }
        l_arrLabels.AddAsLast(i_arrProcessId.ElementAt( loopCounter1 -1));
      }
    }
    l_intNumberOfDeactivatedStartPoints=i_arrProcessDeactivatedStartPoints.GetSize();
    l_strTopText = Translate("Define Workflow ");
    {
      for(loopCounter5 = 0; loopCounter5 < l_intNumberOfDeactivatedStartPoints;)
      {
        loopCounter5 = loopCounter5 + 1;
        l_strDeactivatedStartProcessID=i_arrProcessId.GetAt(i_arrProcessDeactivatedStartPoints.ElementAt( loopCounter5 -1)-1);
        if (loopCounter5 == 1)
        {
          l_strTopText = StrConcat8(l_strTopText, Translate("Deactivated Starting Points:"), Translate("\n"), Translate("\n"), Translate("- "), Translate("["), l_strDeactivatedStartProcessID, Translate("] "));
        }
        else
        {
          l_strTopText = StrConcat8(l_strTopText, Translate("\n"), Translate(""), Translate(""), Translate("- "), Translate("["), l_strDeactivatedStartProcessID, Translate("] "));
        }
      }
    }
    l_intReturnDisplayDialog = VectorCustomDialogs::RadioButtonDialog(t_strKitProviderKitName, VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, l_strTopText, Translate("Press Accept to confirm, Cancel to abort"), l_arrLabels, l_arrToolTips, l_arrIsEditable, l_arrIsSelected, l_arrGroupName, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
    {
      for(loopCounter3 = 0; loopCounter3 < l_intTotalNumberOfProcesses;)
      {
        loopCounter3 = loopCounter3 + 1;
        l_intProcessCounter = l_intProcessCounter + 1;
        if (l_arrIsSelected.ElementAt( loopCounter3 -1) == 1)
        {
          l_intStartProcess = loopCounter3;
          o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arr_blnProcessActivationStatus: "), o_arr_blnProcessActivationStatus);
    l_arrGroupName.SetSize(0);
    l_arrLabels.SetSize(0);
    l_arrIsEditable.SetSize(0);
    l_arrIsSelected.SetSize(0);
    l_arrToolTips.SetSize(0);
    l_intNumberOfDeactivatedStopPoints=i_arrProcessDeactivatedStopPoints.GetSize();
    l_strTopText = Translate("Define Workflow ");
    {
      for(loopCounter5 = 0; loopCounter5 < l_intNumberOfDeactivatedStopPoints;)
      {
        loopCounter5 = loopCounter5 + 1;
        l_strDeactivatedStopProcessID=i_arrProcessId.GetAt(i_arrProcessDeactivatedStopPoints.ElementAt( loopCounter5 -1)-1);
        if (loopCounter5 == 1)
        {
          l_strTopText = StrConcat8(l_strTopText, Translate("Deactivated Stop Points:"), Translate("\n"), Translate("\n"), Translate("- "), Translate("["), l_strDeactivatedStopProcessID, Translate("] "));
        }
        else
        {
          l_strTopText = StrConcat8(l_strTopText, Translate("\n"), Translate(""), Translate(""), Translate("- "), Translate("["), l_strDeactivatedStopProcessID, Translate("] "));
        }
      }
    }
    l_arrGroupName.AddAsLast(Translate("Start Process"));
    l_arrLabels.AddAsLast(i_arrProcessId.ElementAt( l_intStartProcess -1));
    l_arrIsEditable.AddAsLast(0);
    l_arrIsSelected.AddAsLast(0);
    l_arrProcessCombination.SetSize(0);
    l_strProcessCombination=i_arrProcessCombinations.GetAt(l_intStartProcess-1);
    STRTOKENIZE::StrTokenize(l_strProcessCombination, Translate("."), l_arrProcessCombination, ASWGLOBAL::BOOL::FALSE);
    l_intNumberOfProcessInCombination=l_arrProcessCombination.GetSize();
    {
      for(loopCounter7 = 0; loopCounter7 < l_intNumberOfProcessInCombination;)
      {
        loopCounter7 = loopCounter7 + 1;
        l_intCurrentProcess = StrIVal(l_arrProcessCombination.ElementAt( loopCounter7 -1));
        l_arrProcessCombination.AddAsLast(l_intCurrentProcess);
      }
    }
    l_intSelectFirstProcessActivated = 0;
    {
      for(loopCounter9 = 0; loopCounter9 < l_intTotalNumberOfProcesses;)
      {
        loopCounter9 = loopCounter9 + 1;
        l_arrGroupName.AddAsLast(Translate("Stop Process"));
        l_intReturnLookUpProcessExistsInCombination = ARRAYTOOLS::Lookup(l_arrProcessCombination, loopCounter9);
        if (l_intReturnLookUpProcessExistsInCombination > 0)
        {
          l_intReturnLookUpProcessIsDeactivated = ARRAYTOOLS::Lookup(i_arrProcessDeactivatedStopPoints, loopCounter9);
          if (l_intReturnLookUpProcessIsDeactivated > 0)
          {
            l_arrIsEditable.AddAsLast(0);
            l_arrIsSelected.AddAsLast(0);
          }
          else
          {
            l_intSelectFirstProcessActivated = l_intSelectFirstProcessActivated + 1;
            if (l_intSelectFirstProcessActivated == 1)
            {
              l_arrIsEditable.AddAsLast(1);
              l_arrIsSelected.AddAsLast(1);
            }
            else
            {
              l_arrIsEditable.AddAsLast(1);
              l_arrIsSelected.AddAsLast(0);
            }
          }
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::TRUE, loopCounter9);
        }
        else
        {
          l_arrIsEditable.AddAsLast(0);
          l_arrIsSelected.AddAsLast(0);
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::FALSE, loopCounter9);
        }
        l_arrLabels.AddAsLast(i_arrProcessId.ElementAt( loopCounter9 -1));
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arr_blnProcessActivationStatus: "), o_arr_blnProcessActivationStatus);
    l_intReturnDisplayDialog = VectorCustomDialogs::RadioButtonDialog(t_strKitProviderKitName, VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, l_strTopText, Translate("Press Accept to confirm, Cancel to abort"), l_arrLabels, l_arrToolTips, l_arrIsEditable, l_arrIsSelected, l_arrGroupName, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
    l_intProcessCounter = 0;
    l_intTotalNumberOfProcessPlusStartProcess = l_intTotalNumberOfProcesses + 1;
    {
      for(loopCounter4 = 0; loopCounter4 < l_intTotalNumberOfProcessPlusStartProcess;)
      {
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 != 1)
        {
          l_intProcessCounter = l_intProcessCounter + 1;
          if (l_arrIsSelected.ElementAt( loopCounter4 -1) == 1)
          {
            l_intStopProcess = l_intProcessCounter;
          }
        }
      }
    }
    o_int_StartProcess = l_intStartProcess;
    o_int_StopProcess = l_intStopProcess;
    {
      for(loopCounter9 = 0; loopCounter9 < l_intTotalNumberOfProcesses;)
      {
        loopCounter9 = loopCounter9 + 1;
        if (loopCounter9 < l_intStartProcess)
        {
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::FALSE, loopCounter9);
        }
        if (loopCounter9 > l_intStopProcess)
        {
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::FALSE, loopCounter9);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("User selected START Process: "), l_intStartProcess);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("User selected STOP Process: "), l_intStopProcess);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arr_blnProcessActivationStatus: "), o_arr_blnProcessActivationStatus);
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _GroupDataInDialog( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[] ) void {
    private variable l_intTempValueColumn2;
    private variable l_intQuantity;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_strQuantity;
    private variable l_intNumberOfElements;
    private variable l_arrTempColumn1[];
    private variable l_arrTempColumn2[];
    private variable l_arrTempColumn3[];
    private variable io_arrColumn1distinct[];
    private variable l_strConcatQty;
    private variable l_intNumberOfDistinctDescriptionsForThisPosition;
    private variable l_intNumberOfDistinctPositions;
    private variable loopCounter6;
    private variable l_strConcatDescription;
    private variable l_arrDescriptionsForThisPosition[];
    private variable l_arrDescriptionsForThisPosition_distinct[];
    private variable l_arrQtyForThisPosition[];
    l_arrTempColumn1.SetSize(0);
    l_arrTempColumn2.SetSize(0);
    l_arrTempColumn3.SetSize(0);
    ARRAYTOOLS::get_distinct_from_array(io_arrColumn1, io_arrColumn1distinct);
    l_intNumberOfDistinctPositions=io_arrColumn1distinct.GetSize();
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Number of Distinct Sites on the Carrier: "), l_intNumberOfDistinctPositions);
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfDistinctPositions;)
      {
        loopCounter1 = loopCounter1 + 1;
        ARRAYTOOLS::ArrayVLookUp(io_arrColumn3, io_arrColumn1, io_arrColumn1distinct.ElementAt( loopCounter1 -1), l_arrDescriptionsForThisPosition);
        ARRAYTOOLS::ArrayVLookUp(io_arrColumn2, io_arrColumn1, io_arrColumn1distinct.ElementAt( loopCounter1 -1), l_arrQtyForThisPosition);
        ARRAYTOOLS::get_distinct_from_array(l_arrDescriptionsForThisPosition, l_arrDescriptionsForThisPosition_distinct);
        l_intNumberOfDistinctDescriptionsForThisPosition=l_arrDescriptionsForThisPosition_distinct.GetSize();
        l_intNumberOfElements=l_arrQtyForThisPosition.GetSize();
        TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("Number of Distinct Positions on Site "), loopCounter1, Translate(": "), l_intNumberOfDistinctDescriptionsForThisPosition);
        TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("Number of Plates at Site "), loopCounter1, Translate(": "), l_intNumberOfElements);
        l_arrTempColumn1.AddAsLast(io_arrColumn1distinct.ElementAt( loopCounter1 -1));
        l_strConcatQty = Translate("");
        l_strConcatDescription = Translate("");
        if (l_intNumberOfDistinctDescriptionsForThisPosition > 1)
        {
          {
            for(loopCounter2 = 0; loopCounter2 < l_intNumberOfElements;)
            {
              loopCounter2 = loopCounter2 + 1;
              if (loopCounter2 == 1)
              {
                l_strConcatQty = StrConcat8(l_strConcatQty, Translate(""), l_arrQtyForThisPosition.ElementAt( loopCounter2 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                l_strConcatDescription = StrConcat8(l_strConcatDescription, Translate(""), l_arrDescriptionsForThisPosition.ElementAt( loopCounter2 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
              else
              {
                l_strConcatQty = StrConcat8(l_strConcatQty, Translate("\n"), l_arrQtyForThisPosition.ElementAt( loopCounter2 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                l_strConcatDescription = StrConcat8(l_strConcatDescription, Translate("\n"), l_arrDescriptionsForThisPosition.ElementAt( loopCounter2 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
            }
          }
          l_arrTempColumn2.AddAsLast(l_strConcatQty);
          l_arrTempColumn3.AddAsLast(l_strConcatDescription);
        }
        else
        {
          if(0){
          }
          l_intQuantity = 0;
          {
            for(loopCounter6 = 0; loopCounter6 < l_intNumberOfElements;)
            {
              loopCounter6 = loopCounter6 + 1;
              l_intTempValueColumn2 = StrIVal(l_arrQtyForThisPosition.ElementAt( loopCounter6 -1));
              l_intQuantity = l_intQuantity + l_intTempValueColumn2;
            }
          }
          l_strQuantity = StrIStr(l_intQuantity);
          l_arrTempColumn2.AddAsLast(l_strQuantity);
          if(0){
            l_arrTempColumn2.AddAsLast(l_arrQtyForThisPosition.ElementAt( l_intNumberOfDistinctDescriptionsForThisPosition -1));
          }
          l_arrTempColumn3.AddAsLast(l_arrDescriptionsForThisPosition.ElementAt( l_intNumberOfDistinctDescriptionsForThisPosition -1));
        }
      }
    }
    io_arrColumn1=l_arrTempColumn1;
    io_arrColumn2=l_arrTempColumn2;
    io_arrColumn3=l_arrTempColumn3;
  }

  private function _Abstract(  ) void {
  }

  function Add_ReagentInTrough( device & Instrument, variable i_strReagentName, variable i_intNumberOfSamples, variable i_strLabwareTypeId, variable i_fltMaximumContainerVolume, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeReagent, variable i_fltExtraVolume, sequence i_seqTemplate, variable & o_arrVolumePerTrough[] ) void {
    private variable l_strFunctionName;
    private variable l_blnIsMasterMix;
    private variable l_strDescriptionForDialog;
    private variable l_blnPrepareMasterMixOnDeck;
    private variable l_blnIsReagent;
    private variable l_blnIsMasterMixComponent;
    private variable loopCounter7;
    private variable l_intRecordCount;
    private variable l_strSQLSentence;
    private variable l_strErrorMessage;
    private variable l_fltTotalVolumeNeeded;
    private variable l_intTotalNumberOfContainers;
    private variable l_strUnits;
    private variable l_fltTotalVolumeNeededForThisComponent;
    private variable l_strSQLUpdateComponent;
    private variable l_fltVolumePerContainer;
    private variable l_strDescription;
    private variable l_strPosID;
    private variable l_intCurrentNumberOfDisctinctVolumes;
    private variable l_strCarrierID;
    private variable l_intNumberOfContainers;
    private variable l_strSiteID;
    private variable loopCounter1;
    private variable l_strColumnReference;
    private variable l_intNumberOfDisctinctVolumes;
    private variable l_strLabID;
    private variable loopCounter3;
    private variable l_strVolumeForDialog;
    private variable l_arrLabIDForMMPrepFile[];
    private variable l_arrPosIDForMMPrepFile[];
    private variable l_arrSeqCreated_tempPosID[];
    private variable l_arrSeqCreated_tempCarrierID[];
    private variable l_arrCurrentVolumes[];
    private variable l_arrDistinctVolumes[];
    private variable l_arrSeqCreated_tempLabID[];
    private variable o_arrVolumePerContainer[];
    private variable l_arrSeqCreated_tempSiteID[];
    private variable l_arrconcat_Descriptions[];
    o_arrVolumePerTrough.SetSize( 0);
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_blnIsMasterMix = ASWGLOBAL::BOOL::FALSE;
    l_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    l_blnIsMasterMixComponent = ASWGLOBAL::BOOL::FALSE;
    l_blnPrepareMasterMixOnDeck = ASWGLOBAL::BOOL::FALSE;
    l_strDescriptionForDialog = Translate("");
    MECC::TraceComment(Translate("INPUT PARAMETERS"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_strReagentName: "), i_strReagentName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_strLabwareTypeId: "), i_strLabwareTypeId);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_fltDeadVolumeLabware: "), i_fltDeadVolumeLabware);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_fltDeadVolumeReagent: "), i_fltDeadVolumeReagent);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_fltMaximumContainerVolume: "), i_fltMaximumContainerVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_intNumberOfSamples: "), i_intNumberOfSamples);
    l_strSQLSentence = Translate("");
    l_intRecordCount = 0;
    l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] = '",i_strReagentName,"'","","","","","","","","","");
    Trace(l_strSQLSentence);
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter7 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter7 = loopCounter7 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_intRecordCount = l_intRecordCount + 1;
        if (file_RunData_DB_Type == GlobalARW::ReagentType::Solution)
        {
          l_blnIsMasterMix = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          l_blnIsMasterMix = ASWGLOBAL::BOOL::FALSE;
        }
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    if (l_intRecordCount == 0)
    {
      MECC::TraceComment(Translate("Mastermix Component? (mastermix components are being renamed as: \"NameOfTheComponent - NameOfTheMastermix\")\n"));
      l_strSQLSentence = Translate("");
      l_intRecordCount = 0;
      l_blnIsMasterMixComponent = ASWGLOBAL::BOOL::FALSE;
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_MasterMixComponentName] = '",i_strReagentName,"' AND [DB_Type] = 'SolutionComponent'","","","","","","","","","");
      Trace(l_strSQLSentence);
      _FileOpenRunData(l_strSQLSentence, 1);
      {
        loopCounter7 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter7 = loopCounter7 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_intRecordCount = l_intRecordCount + 1;
          l_blnIsMasterMixComponent = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    if (l_intRecordCount != 0)
    {
      _NumberOfContainers_VolumePerContainer_BasedOnNumberOfSamples(i_fltMaximumContainerVolume, file_RunData_DB_VolumePerWell, i_intNumberOfSamples, i_fltDeadVolumeReagent, i_fltDeadVolumeLabware, i_fltExtraVolume, 0, l_intTotalNumberOfContainers, l_fltTotalVolumeNeeded, o_arrVolumePerContainer);
      _ConvertValueToString(l_intTotalNumberOfContainers, l_strUnits);
      if (l_blnIsMasterMixComponent == ASWGLOBAL::BOOL::TRUE)
      {
        l_strSQLSentence = StrConcat2("UPDATE [RunData$] SET","");
        l_strSQLSentence = StrConcat4(l_strSQLSentence," [DB_TotalVolume] = ",l_fltTotalVolumeNeeded,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_Units] = '",l_strUnits,"'");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumeLabware] = ",i_fltDeadVolumeLabware,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumePercent] = ",i_fltDeadVolumeReagent,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ExtraVolume] = ",i_fltExtraVolume,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ReagentNameANDLabwareType] = '",l_strDescriptionForDialog,"'");
        l_strSQLSentence = StrConcat4(l_strSQLSentence," WHERE [DB_MasterMixComponentName] = '",i_strReagentName,"'");
        Trace(l_strSQLSentence);
      }
      else
      {
        if (l_blnIsMasterMix == ASWGLOBAL::BOOL::TRUE)
        {
          l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] LIKE '%- ",i_strReagentName,"'","","","","","","","","","");
          Trace(l_strSQLSentence);
          _FileOpenRunData(l_strSQLSentence, 1);
          {
            loopCounter7 = 0;
            while (
               (file_RunData.Eof() == 0)
            )
            {
              loopCounter7 = loopCounter7 + 1;
              if( 0 == file_RunData.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              l_fltTotalVolumeNeededForThisComponent = l_fltTotalVolumeNeeded * file_RunData_DB_Ratio;
              l_strSQLUpdateComponent = Translate("");
              l_strSQLUpdateComponent = StrConcat2("UPDATE [RunData$] SET","");
              l_strSQLUpdateComponent = StrConcat4(l_strSQLUpdateComponent," [DB_TotalVolume] = ",l_fltTotalVolumeNeededForThisComponent,"");
              l_strSQLUpdateComponent = StrConcat4(l_strSQLUpdateComponent," WHERE [DB_ReagentName] = '",file_RunData_DB_ReagentName,"'");
              Trace(l_strSQLUpdateComponent);
              _FileOpenRunData(l_strSQLUpdateComponent, 1);
            }
          }
          l_strSQLSentence = StrConcat2("UPDATE [RunData$] SET","");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," [DB_TotalVolume] = ",l_fltTotalVolumeNeeded,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_Units] = '",l_strUnits,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumeLabware] = ",i_fltDeadVolumeLabware,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumePercent] = ",i_fltDeadVolumeReagent,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ExtraVolume] = ",i_fltExtraVolume,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ReagentNameANDLabwareType] = '",l_strDescriptionForDialog,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," WHERE [DB_ReagentName] = '",i_strReagentName,"'");
          Trace(l_strSQLSentence);
        }
        else
        {
          l_strSQLSentence = StrConcat2("UPDATE [RunData$] SET","");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," [DB_TotalVolume] = ",l_fltTotalVolumeNeeded,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_Units] = '",l_strUnits,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumeLabware] = ",i_fltDeadVolumeLabware,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumePercent] = ",i_fltDeadVolumeReagent,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ExtraVolume] = ",i_fltExtraVolume,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ReagentNameANDLabwareType] = '",l_strDescriptionForDialog,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," WHERE [DB_ReagentName] = '",i_strReagentName,"'");
          Trace(l_strSQLSentence);
        }
      }
      _FileOpenRunData(l_strSQLSentence, 1);
      l_arrconcat_Descriptions.SetSize(0);
      l_arrLabIDForMMPrepFile.SetSize(0);
      l_arrPosIDForMMPrepFile.SetSize(0);
      l_arrSeqCreated_tempLabID.SetSize(0);
      l_arrSeqCreated_tempPosID.SetSize(0);
      l_arrSeqCreated_tempCarrierID.SetSize(0);
      l_arrSeqCreated_tempSiteID.SetSize(0);
      l_strPosID = SeqGetPositionId(i_seqTemplate);
      l_arrSeqCreated_tempPosID.AddAsLast(l_strPosID);
      {
        loopCounter1 = 0;
        while (
           (i_seqTemplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, i_seqTemplate, 1);
          loopCounter1 = loopCounter1 + 1;
          l_strLabID = SeqGetLabwareId(i_seqTemplate);
          _GetCarrierAndSiteID(Instrument, l_strLabID, l_strCarrierID, l_strSiteID);
          l_arrSeqCreated_tempLabID.AddAsLast(l_strLabID);
          l_arrSeqCreated_tempSiteID.AddAsLast(l_strSiteID);
          l_arrSeqCreated_tempCarrierID.AddAsLast(l_strCarrierID);
          SeqIncrement(i_seqTemplate, 1);
          if (
             (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
        i_seqTemplate.SetCurrentPosition(1);
      }
      l_fltVolumePerContainer = l_fltTotalVolumeNeeded;
      l_intNumberOfContainers = 1;
      l_strDescription = Translate("");
      _GenerateString(l_fltVolumePerContainer, l_strVolumeForDialog);
      l_strDescription = StrConcat12(l_strDescription, Translate(""), Translate(""), Translate(""), Translate(""), Translate(" ["), l_strVolumeForDialog, Translate("]"), Translate(" --- "), i_strLabwareTypeId, Translate(""), Translate(""));
      if(0){
        {
          for(loopCounter3 = 0; loopCounter3 < l_intNumberOfDisctinctVolumes;)
          {
            loopCounter3 = loopCounter3 + 1;
            ARRAYTOOLS::ArrayVLookUp(o_arrVolumePerContainer, o_arrVolumePerContainer, l_arrDistinctVolumes.ElementAt( loopCounter3 -1), l_arrCurrentVolumes);
            l_intCurrentNumberOfDisctinctVolumes=l_arrCurrentVolumes.GetSize();
            if (l_intNumberOfDisctinctVolumes == 1)
            {
            }
            else
            {
              if (loopCounter3 == l_intNumberOfDisctinctVolumes)
              {
                l_strDescription = StrConcat12(l_strDescription, Translate(""), l_intCurrentNumberOfDisctinctVolumes, Translate(" x "), Translate(""), Translate(" ["), l_strVolumeForDialog, Translate("]"), Translate(" --- "), i_strLabwareTypeId, Translate(""), Translate(""));
              }
              else
              {
                l_strDescription = StrConcat12(l_strDescription, Translate(""), l_intCurrentNumberOfDisctinctVolumes, Translate(" x "), Translate(""), Translate(" ["), l_strVolumeForDialog, Translate("]"), Translate(" --- "), i_strLabwareTypeId, Translate("\n"), Translate(""));
              }
            }
          }
        }
      }
      l_arrconcat_Descriptions.AddAsLast(l_strDescription);
      if (l_blnIsMasterMixComponent != ASWGLOBAL::BOOL::TRUE)
      {
        l_strColumnReference = Translate("DB_ReagentName");
      }
      else
      {
        l_strColumnReference = Translate("DB_MasterMixComponentName");
      }
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempCarrierID, Translate("DB_CarrierName"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempSiteID, Translate("DB_SiteID"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempLabID, Translate("DB_LabwareType"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempLabID, Translate("DB_LabwareID"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempPosID, Translate("DB_PositionID"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrconcat_Descriptions, Translate("DB_ReagentNameANDLabwareType"), i_strReagentName, l_strColumnReference);
    }
    else
    {
      l_strErrorMessage = StrConcat12(Translate("xxxxxxxxxxxxxxxxxxxxxx  Reagent: "), i_strReagentName, Translate(" DOES NOT EXIST"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(""), l_strErrorMessage);
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  function Load_StackCarrier( device & Instrument, variable i_strCarrierID, variable i_strMainImageName, variable i_strSubImageName, variable & o_arrNumberOfUnitsInEachStack[] ) void {
    private variable l_intReturnSearchIndex;
    private variable l_strSQLSentence;
    private variable l_strSQL;
    private variable l_strTempPositionID;
    private variable l_intReturnFindTips;
    private variable l_strLenghtRecord;
    private variable loopCounter5;
    private variable l_strFunctionName;
    private variable l_arrDataColumn1_Positions[];
    private variable l_arrColumnHeaders[];
    private variable l_arrDataColumn2_QuantityVolumes[];
    private variable l_arrDataColumn3_Descriptions[];
    private variable l_strReturn;
    private variable l_arrIsStack[];
    private variable l_intNumberofSites;
    private variable l_arrSize;
    private variable loopCounter1;
    private variable l_strLoopCounter;
    private variable l_arrReturn[];
    private variable l_strTempSiteID;
    o_arrNumberOfUnitsInEachStack.SetSize( 0);
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Carrier requested: "), i_strCarrierID);
    l_intReturnSearchIndex = ARRAYTOOLS::Lookup(t_arrCarrierNameDistinct, i_strCarrierID);
    _DetermineIfSitesAreStacks(Instrument, i_strCarrierID, l_arrIsStack);
    l_intNumberofSites=l_arrIsStack.GetSize();
    if (l_intReturnSearchIndex > 0)
    {
      l_arrDataColumn1_Positions.SetSize(0);
      l_arrDataColumn2_QuantityVolumes.SetSize(0);
      l_arrDataColumn3_Descriptions.SetSize(0);
      Trace("result for searching carrier ID : ",l_intReturnSearchIndex);
      Trace("Carrier ID FOUND: ",i_strCarrierID);
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_CarrierName] = '",i_strCarrierID,"'","","","","","","","","","");
      Trace(l_strSQLSentence);
      //l_strSQLSentence = StrConcat12("","","","","","","","","","","","");
      Trace ("t_strFullpathFileRunData: ", t_strFullpathFileRunData);
      _FileOpenRunData(l_strSQLSentence, 1);
      {
        loopCounter5 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter5 = loopCounter5 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_intReturnFindTips = StrFind(file_RunData_DB_LabwareType, Translate("Tips"));
          if (l_intReturnFindTips < 0)
          {
            l_strTempPositionID = Translate("");
            l_strLenghtRecord = StrGetLength(file_RunData_DB_PositionID);
            if (l_strLenghtRecord < 2)
            {
              l_strTempPositionID = StrConcat4(Translate(""), Translate("0"), file_RunData_DB_PositionID, Translate(""));
            }
            else
            {
              l_strTempPositionID = file_RunData_DB_PositionID;
            }
            if (file_RunData_DB_SiteID == "Multitube_Adapter")
            {
              l_strTempPositionID = StrConcat4(file_RunData_DB_SiteID, Translate(" Pos. "), l_strTempPositionID, Translate(""));
            }
            l_strTempSiteID = Translate("");
            l_strLenghtRecord = StrGetLength(file_RunData_DB_SiteID);
            l_strTempSiteID = StrConcat4(Translate(""), Translate("0"), file_RunData_DB_SiteID, Translate(""));
            if (file_RunData_DB_Type == "Reagent")
            {
              l_arrDataColumn1_Positions.AddAsLast(l_strTempPositionID);
              l_arrDataColumn2_QuantityVolumes.AddAsLast(file_RunData_DB_ReagentName);
              l_arrDataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
            }
            else
            {
              l_arrDataColumn1_Positions.AddAsLast(l_strTempSiteID);
              l_arrDataColumn2_QuantityVolumes.AddAsLast(file_RunData_DB_Units);
              l_arrDataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
            }
          }
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
      l_strSQL = Translate("");
      l_arrColumnHeaders.SetSize(0);
      l_arrColumnHeaders.AddAsLast(Translate("Position"));
      l_arrColumnHeaders.AddAsLast(Translate("Quantity"));
      l_arrColumnHeaders.AddAsLast(Translate("Description"));
      {
        for(loopCounter1 = 0; loopCounter1 < l_intNumberofSites;)
        {
          loopCounter1 = loopCounter1 + 1;
          if (l_arrIsStack.ElementAt( loopCounter1 -1) == 1)
          {
            MECC::TraceComment(Translate("Does position already exist"));
            l_strTempPositionID = Translate("");
            l_strLoopCounter = StrIStr(loopCounter1);
            l_strLenghtRecord = StrGetLength(l_strLoopCounter);
            if (l_strLenghtRecord < 2)
            {
              l_strTempPositionID = StrConcat4(Translate(""), Translate("0"), loopCounter1, Translate(""));
            }
            else
            {
              l_strTempPositionID = l_strLoopCounter;
            }
            l_arrReturn = HSLExtensions::Array::FindValue(l_arrDataColumn1_Positions, l_strTempPositionID);
            TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Found Values"), l_arrReturn);
            l_arrSize=l_arrReturn.GetSize();
            if (l_arrSize > 0)
            {
              MECC::TraceComment(Translate("POSITION ALREADY EXISTS"));
            }
            else
            {
              MECC::TraceComment(Translate("POSITION WILL BE ADDED"));
              l_arrDataColumn1_Positions.AddAsLast(l_strTempPositionID);
              l_arrDataColumn2_QuantityVolumes.AddAsLast(Translate(" - "));
              l_arrDataColumn3_Descriptions.AddAsLast(Translate(" - "));
            }
          }
        }
      }
      _SortElements(l_arrDataColumn1_Positions, l_arrDataColumn2_QuantityVolumes, l_arrDataColumn3_Descriptions, 1);
      _GroupDataInDialog(l_arrDataColumn1_Positions, l_arrDataColumn2_QuantityVolumes, l_arrDataColumn3_Descriptions);
      _Display_LoadCarrier_Dialog(i_strMainImageName, i_strSubImageName, Translate("Loading Carrier"), l_arrColumnHeaders, l_arrDataColumn1_Positions, l_arrDataColumn2_QuantityVolumes, l_arrDataColumn3_Descriptions);
      o_arrNumberOfUnitsInEachStack = HSLExtensions::Array::ConvertToIntegerArray(l_arrDataColumn2_QuantityVolumes, l_strReturn);
    }
    else
    {
      Trace("result for searching carrier ID : ",l_intReturnSearchIndex);
      Trace("Carrier ID NOT FOUND: ",i_strCarrierID);
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _DisplayMessageDialog( variable i_str_Message, variable i_int_icon ) void {
    private variable l_int_rtnErrorDialog;
    _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
    if (i_int_icon == 1)
    {
      l_int_rtnErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(" "), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, i_str_Message, Translate("Press OK to proceed the run"));
    }
    if (i_int_icon == 2)
    {
      l_int_rtnErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(" "), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, i_str_Message, Translate("Press OK to proceed the run"));
    }
    if (i_int_icon == 3)
    {
      l_int_rtnErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(" "), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, i_str_Message, Translate("Press OK to proceed the run"));
    }
    if (i_int_icon == 4)
    {
      l_int_rtnErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(" "), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, i_str_Message, Translate("Press OK to proceed the run"));
    }
    _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
  }

  function Add_ReagentInTubes( device & Instrument, variable i_strReagentName, variable i_intNumberOfSamples, variable i_strLabwareTypeId, variable i_fltMaximumContainerVolume, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeReagent, variable i_fltExtraVolume, sequence i_seqTemplate, variable i_intMinimumNumberOfContainers, variable & o_arrVolumePerTube[] ) void {
    private variable loopCounter7;
    private variable l_fltVolumePerContainer;
    private variable l_strDescription;
    private variable l_blnIsMasterMix;
    private variable l_fltTotalVolumeNeeded;
    private variable l_strDescriptionForDialog;
    private variable l_strUnits;
    private variable l_strPosID;
    private variable l_blnIsReagent;
    private variable l_blnPrepareMasterMixOnDeck;
    private variable l_intRecordCount;
    private variable l_strSQLSentence;
    private variable l_strErrorMessage;
    private variable l_intCurrentNumberOfDisctinctVolumes;
    private variable l_strCarrierID;
    private variable loopCounter1;
    private variable l_strSiteID;
    private variable l_intNumberOfContainers;
    private variable l_strColumnReference;
    private variable l_strLabID;
    private variable l_blnIsMasterMixComponent;
    private variable l_intNumberOfDisctinctVolumes;
    private variable l_intTotalNumberOfContainers;
    private variable loopCounter3;
    private variable l_fltTotalVolumeNeededForThisComponent;
    private variable l_strVolumeForDialog;
    private variable l_strSQLUpdateComponent;
    private variable l_strFunctionName;
    private variable l_arrLabIDForMMPrepFile[];
    private variable l_arrPosIDForMMPrepFile[];
    private variable l_arrSeqCreated_tempPosID[];
    private variable l_arrSeqCreated_tempCarrierID[];
    private variable l_arrCurrentVolumes[];
    private variable l_arrDistinctVolumes[];
    private variable l_arrSeqCreated_tempLabID[];
    private variable l_arrconcat_Descriptions[];
    private variable l_arrSeqCreated_tempSiteID[];
    private variable file1_DB_ReagentNameANDLabwareType;
    private variable file1_DB_PositionID;
    private variable file1_DB_VolumePerWell;
    private variable file1_DB_Ratio;
    private variable file1_DB_MasterMixComponentName;
    private variable file1_DB_LabwareID;
    private variable file1_DB_DeadVolumeLabware;
    private variable file1_DB_SiteID;
    private variable file1_DB_Type;
    private variable file1_DB_CarrierName;
    private variable file1_DB_LabwareType;
    private variable file1_DB_Units;
    private variable file1_DB_ReagentName;
    private variable file1_DB_LabwareName;
    private variable file1_DB_DeadVolumePercent;
    private variable file1_DB_TotalVolume;
    private variable file1_DB_ExtraVolume;
    private file file1;
    private variable loopCounter2;
    o_arrVolumePerTube.SetSize( 0);
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_blnIsMasterMix = ASWGLOBAL::BOOL::FALSE;
    l_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    l_blnIsMasterMixComponent = ASWGLOBAL::BOOL::FALSE;
    l_blnPrepareMasterMixOnDeck = ASWGLOBAL::BOOL::FALSE;
    l_strDescriptionForDialog = Translate("");
    MECC::TraceComment(Translate("INPUT PARAMETERS"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_strReagentName: "), i_strReagentName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_strLabwareTypeId: "), i_strLabwareTypeId);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_fltDeadVolumeLabware: "), i_fltDeadVolumeLabware);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_fltDeadVolumeReagent: "), i_fltDeadVolumeReagent);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_fltMaximumContainerVolume: "), i_fltMaximumContainerVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_intNumberOfSamples: "), i_intNumberOfSamples);
    l_strSQLSentence = Translate("");
    l_intRecordCount = 0;
    l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] = '",i_strReagentName,"'","","","","","","","","","");
    Trace(l_strSQLSentence);
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter7 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter7 = loopCounter7 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_intRecordCount = l_intRecordCount + 1;
        if (file_RunData_DB_Type == GlobalARW::ReagentType::Solution)
        {
          l_blnIsMasterMix = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          l_blnIsMasterMix = ASWGLOBAL::BOOL::FALSE;
        }
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    if (l_intRecordCount == 0)
    {
      MECC::TraceComment(Translate("Mastermix Component? (mastermix components are being renamed as: \"NameOfTheComponent - NameOfTheMastermix\")\n"));
      l_strSQLSentence = Translate("");
      l_intRecordCount = 0;
      l_blnIsMasterMixComponent = ASWGLOBAL::BOOL::FALSE;
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_MasterMixComponentName] = '",i_strReagentName,"' AND [DB_Type] = 'SolutionComponent'","","","","","","","","","");
      Trace(l_strSQLSentence);
      _FileOpenRunData(l_strSQLSentence, 1);
      {
        loopCounter7 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter7 = loopCounter7 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_intRecordCount = l_intRecordCount + 1;
          l_blnIsMasterMixComponent = ASWGLOBAL::BOOL::TRUE;
          l_blnPrepareMasterMixOnDeck = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    if (l_intRecordCount != 0)
    {
      _NumberOfContainers_VolumePerContainer_BasedOnNumberOfSamples(i_fltMaximumContainerVolume, file_RunData_DB_VolumePerWell, i_intNumberOfSamples, i_fltDeadVolumeReagent, i_fltDeadVolumeLabware, i_fltExtraVolume, i_intMinimumNumberOfContainers, l_intTotalNumberOfContainers, l_fltTotalVolumeNeeded, o_arrVolumePerTube);
      _ConvertValueToString(l_intTotalNumberOfContainers, l_strUnits);
      if (l_blnIsMasterMixComponent == ASWGLOBAL::BOOL::TRUE)
      {
        l_strSQLSentence = StrConcat2("UPDATE [RunData$] SET","");
        l_strSQLSentence = StrConcat4(l_strSQLSentence," [DB_TotalVolume] = ",l_fltTotalVolumeNeeded,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_Units] = '",l_strUnits,"'");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumeLabware] = ",i_fltDeadVolumeLabware,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumePercent] = ",i_fltDeadVolumeReagent,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ExtraVolume] = ",i_fltExtraVolume,"");
        l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ReagentNameANDLabwareType] = '",l_strDescriptionForDialog,"'");
        l_strSQLSentence = StrConcat4(l_strSQLSentence," WHERE [DB_MasterMixComponentName] = '",i_strReagentName,"'");
        Trace(l_strSQLSentence);
      }
      else
      {
        if (l_blnIsMasterMix == ASWGLOBAL::BOOL::TRUE)
        {
          l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] LIKE '%- ",i_strReagentName,"'","","","","","","","","","");
          Trace(l_strSQLSentence);
          _FileOpenRunData(l_strSQLSentence, 1);
          {
            loopCounter7 = 0;
            while (
               (file_RunData.Eof() == 0)
            )
            {
              loopCounter7 = loopCounter7 + 1;
              if( 0 == file_RunData.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              l_fltTotalVolumeNeededForThisComponent = l_fltTotalVolumeNeeded * file_RunData_DB_Ratio;
              l_strSQLUpdateComponent = Translate("");
              l_strSQLUpdateComponent = StrConcat2("UPDATE [RunData$] SET","");
              l_strSQLUpdateComponent = StrConcat4(l_strSQLUpdateComponent," [DB_TotalVolume] = ",l_fltTotalVolumeNeededForThisComponent,"");
              l_strSQLUpdateComponent = StrConcat4(l_strSQLUpdateComponent," WHERE [DB_ReagentName] = '",file_RunData_DB_ReagentName,"'");
              Trace(l_strSQLUpdateComponent);
              file1.AddField("DB_VolumePerWell", file1_DB_VolumePerWell, hslFloat);
              file1.AddField("DB_DeadVolumeLabware", file1_DB_DeadVolumeLabware, hslFloat);
              file1.AddField("DB_DeadVolumePercent", file1_DB_DeadVolumePercent, hslFloat);
              file1.AddField("DB_TotalVolume", file1_DB_TotalVolume, hslFloat);
              file1.AddField("DB_ExtraVolume", file1_DB_ExtraVolume, hslFloat);
              file1.AddField("DB_CarrierName", file1_DB_CarrierName, hslString, 255);
              file1.AddField("DB_SiteID", file1_DB_SiteID, hslString, 255);
              file1.AddField("DB_Units", file1_DB_Units, hslString, 255);
              file1.AddField("DB_LabwareType", file1_DB_LabwareType, hslString, 255);
              file1.AddField("DB_LabwareName", file1_DB_LabwareName, hslString, 255);
              file1.AddField("DB_LabwareID", file1_DB_LabwareID, hslString, 255);
              file1.AddField("DB_PositionID", file1_DB_PositionID, hslString, 255);
              file1.AddField("DB_ReagentName", file1_DB_ReagentName, hslString, 255);
              file1.AddField("DB_MasterMixComponentName", file1_DB_MasterMixComponentName, hslString, 255);
              file1.AddField("DB_Type", file1_DB_Type, hslString, 255);
              file1.AddField("DB_Ratio", file1_DB_Ratio, hslFloat);
              file1.AddField("DB_ReagentNameANDLabwareType", file1_DB_ReagentNameANDLabwareType, hslString, 255);
              if( 0 == file1.Open(t_strFullpathFileRunData + " " + "RunData$", hslRead, l_strSQLUpdateComponent) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullpathFileRunData, "HxMetEdCompCmd");
              }
            }
          }
          l_strSQLSentence = StrConcat2("UPDATE [RunData$] SET","");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," [DB_TotalVolume] = ",l_fltTotalVolumeNeeded,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_Units] = '",l_strUnits,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumeLabware] = ",i_fltDeadVolumeLabware,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumePercent] = ",i_fltDeadVolumeReagent,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ExtraVolume] = ",i_fltExtraVolume,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ReagentNameANDLabwareType] = '",l_strDescriptionForDialog,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," WHERE [DB_ReagentName] = '",i_strReagentName,"'");
          Trace(l_strSQLSentence);
        }
        else
        {
          l_strSQLSentence = StrConcat2("UPDATE [RunData$] SET","");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," [DB_TotalVolume] = ",l_fltTotalVolumeNeeded,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_Units] = '",l_strUnits,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumeLabware] = ",i_fltDeadVolumeLabware,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_DeadVolumePercent] = ",i_fltDeadVolumeReagent,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ExtraVolume] = ",i_fltExtraVolume,"");
          l_strSQLSentence = StrConcat4(l_strSQLSentence,",[DB_ReagentNameANDLabwareType] = '",l_strDescriptionForDialog,"'");
          l_strSQLSentence = StrConcat4(l_strSQLSentence," WHERE [DB_ReagentName] = '",i_strReagentName,"'");
          Trace(l_strSQLSentence);
        }
      }
      _FileOpenRunData(l_strSQLSentence, 1);
      l_arrconcat_Descriptions.SetSize(0);
      l_arrLabIDForMMPrepFile.SetSize(0);
      l_arrPosIDForMMPrepFile.SetSize(0);
      l_arrSeqCreated_tempLabID.SetSize(0);
      l_arrSeqCreated_tempPosID.SetSize(0);
      l_arrSeqCreated_tempCarrierID.SetSize(0);
      l_arrSeqCreated_tempSiteID.SetSize(0);
      if(0){
        l_strPosID = SeqGetPositionId(i_seqTemplate);
        l_arrSeqCreated_tempPosID.AddAsLast(l_strPosID);
      }
      {
        for(loopCounter2 = 0; loopCounter2 < l_intTotalNumberOfContainers;)
        {
          loopCounter2 = loopCounter2 + 1;
          l_strPosID = SeqGetPositionId(i_seqTemplate);
          l_arrSeqCreated_tempPosID.AddAsLast(l_strPosID);
          SeqIncrement(i_seqTemplate, 1);
        }
      }
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Temp Position Array"), l_arrSeqCreated_tempPosID);
      SeqResetSequenceIndexes(i_seqTemplate);
      {
        loopCounter1 = 0;
        while (
           (i_seqTemplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, i_seqTemplate, 1);
          loopCounter1 = loopCounter1 + 1;
          l_strLabID = SeqGetLabwareId(i_seqTemplate);
          _GetCarrierAndSiteID(Instrument, l_strLabID, l_strCarrierID, l_strSiteID);
          l_arrSeqCreated_tempLabID.AddAsLast(l_strLabID);
          l_arrSeqCreated_tempSiteID.AddAsLast(l_strSiteID);
          l_arrSeqCreated_tempCarrierID.AddAsLast(l_strCarrierID);
          SeqIncrement(i_seqTemplate, 1);
          if (
             (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
        i_seqTemplate.SetCurrentPosition(1);
      }
      l_fltVolumePerContainer = 0.0;
      l_intNumberOfContainers = 0;
      l_strDescription = Translate("");
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Array of Volumes: "), o_arrVolumePerTube);
      ARRAYTOOLS::get_distinct_from_array(o_arrVolumePerTube, l_arrDistinctVolumes);
      l_intNumberOfDisctinctVolumes=l_arrDistinctVolumes.GetSize();
      {
        for(loopCounter3 = 0; loopCounter3 < l_intNumberOfDisctinctVolumes;)
        {
          loopCounter3 = loopCounter3 + 1;
          ARRAYTOOLS::ArrayVLookUp(o_arrVolumePerTube, o_arrVolumePerTube, l_arrDistinctVolumes.ElementAt( loopCounter3 -1), l_arrCurrentVolumes);
          l_intCurrentNumberOfDisctinctVolumes=l_arrCurrentVolumes.GetSize();
          _GenerateString(l_arrDistinctVolumes.ElementAt( loopCounter3 -1), l_strVolumeForDialog);
          if (l_intNumberOfDisctinctVolumes == 1)
          {
            l_strDescription = StrConcat12(l_strDescription, Translate(""), l_intCurrentNumberOfDisctinctVolumes, Translate(" x "), Translate(""), Translate(" ["), l_strVolumeForDialog, Translate("]"), Translate(" --- "), i_strLabwareTypeId, Translate(""), Translate(""));
          }
          else
          {
            if (loopCounter3 == l_intNumberOfDisctinctVolumes)
            {
              l_strDescription = StrConcat12(l_strDescription, Translate(""), l_intCurrentNumberOfDisctinctVolumes, Translate(" x "), Translate(""), Translate(" ["), l_strVolumeForDialog, Translate("]"), Translate(" --- "), i_strLabwareTypeId, Translate(""), Translate(""));
            }
            else
            {
              l_strDescription = StrConcat12(l_strDescription, Translate(""), l_intCurrentNumberOfDisctinctVolumes, Translate(" x "), Translate(""), Translate(" ["), l_strVolumeForDialog, Translate("]"), Translate(" --- "), i_strLabwareTypeId, Translate("\n"), Translate(""));
            }
          }
        }
      }
      l_arrconcat_Descriptions.AddAsLast(l_strDescription);
      if (l_blnIsMasterMixComponent != ASWGLOBAL::BOOL::TRUE)
      {
        l_strColumnReference = Translate("DB_ReagentName");
      }
      else
      {
        l_strColumnReference = Translate("DB_MasterMixComponentName");
      }
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempCarrierID, Translate("DB_CarrierName"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempSiteID, Translate("DB_SiteID"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempLabID, Translate("DB_LabwareType"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempLabID, Translate("DB_LabwareID"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrSeqCreated_tempPosID, Translate("DB_PositionID"), i_strReagentName, l_strColumnReference);
      _UpdateLabwareDataInFile(l_arrconcat_Descriptions, Translate("DB_ReagentNameANDLabwareType"), i_strReagentName, l_strColumnReference);
    }
    else
    {
      l_strErrorMessage = StrConcat12(Translate("xxxxxxxxxxxxxxxxxxxxxx  Reagent: "), i_strReagentName, Translate(" DOES NOT EXIST"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(""), l_strErrorMessage);
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_strFunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function Calculate_TotalVolume_MastermixComponent( variable i_str_MastermixName, variable i_str_MastermixComponentName, variable i_flt_MastermixVolume, variable i_flt_MastermixTotalVolume, variable i_flt_MastermixComponentVolume, variable & o_flt_MastermixComponentTotalVolume, variable & o_flt_Ratio ) void {
    private variable l_flt_Ratio;
    private variable l_flt_MastermixComponentTotalVolume;
    o_flt_MastermixComponentTotalVolume = 0;
    o_flt_Ratio = 0;
    l_flt_MastermixComponentTotalVolume = 0.0;
    l_flt_Ratio = 0.0;
    TrcTrace("------- Calculate Volume for the next Mastermix Component ",i_str_MastermixComponentName);
    TrcTrace("----------------------------------Component of Mastermix: ",i_str_MastermixName);
    TrcTrace("---------------------------------- i_flt_MastermixComponentVolume: ",i_flt_MastermixComponentVolume);
    TrcTrace("---------------------------------- i_flt_MastermixTotalVolume: ",i_flt_MastermixTotalVolume);
    TrcTrace("---------------------------------- i_flt_MastermixVolume: ",i_flt_MastermixVolume);
    l_flt_MastermixComponentTotalVolume = (i_flt_MastermixComponentVolume * i_flt_MastermixTotalVolume)/i_flt_MastermixVolume;
    TrcTrace("Volume calculated (ul): ", l_flt_MastermixComponentTotalVolume);
    l_flt_Ratio = (i_flt_MastermixComponentVolume / i_flt_MastermixVolume);
    TrcTrace("Ratio: ", l_flt_Ratio);
    o_flt_MastermixComponentTotalVolume = l_flt_MastermixComponentTotalVolume;
    o_flt_Ratio = l_flt_Ratio;
  }

  function _NumberOfContainers_VolumePerContainer_BasedOnNumberOfSamples( variable i_flt_MaximumVolumePerContainer, variable i_flt_VolumePerSample, variable i_int_NumberOfSamples, variable i_flt_DeadVolumeReagent, variable i_flt_DeadVolumeLabware, variable i_flt_ExtraVolume, variable i_int_DesiredNumberOfContainers, variable & o_int_NumberOfContainers, variable & o_flt_TotalVolumeNeeded, variable & o_arr_fltVolumePerContainer[] ) void {
    private variable l_flt_DeadVolumeReagent;
    private variable l_int_NumberOfContainers;
    private variable l_flt_TotalDeadVolumeLabware;
    private variable l_int_NumberOfContainerForCalculations;
    private variable l_bln_RecalculateTotalVolumeNeeded;
    private variable l_flt_TotalVolumeNeeded;
    private variable l_flt_TotalVolumeNeededIncludingDeadVolLabware;
    private variable l_int_NumberOfSamplesPerContainer;
    private variable l_int_MaxNumberOfSamplesPerContainer;
    private variable l_flt_MaximumVolumePerContainer;
    private variable l_extraVolumePerContainer;
    private variable l_int_NumberOfContainersAfterRecalculation;
    private variable l_flt_TotalVolumeNeededAfterRecalculation;
    private variable l_int_RemainingSamples;
    private variable l_flt_VolumePerContainer;
    private variable l_flt_RealVolumePerSample;
    private variable loopCounter5;
    private variable loopCounter6;
    private variable l_int_NumberOfSamplesForThisContainer;
    private variable l_flt_VolumePerSampleIncludingDeadVolumeReagent;
    private variable l_arr_fltVolumePerContainer[];
    private variable l_arr_intNumberOfSamplesPerContainer[];
    o_int_NumberOfContainers = 0;
    o_flt_TotalVolumeNeeded = 0;
    o_arr_fltVolumePerContainer.SetSize( 0);
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_int_NumberOfSamples: "), i_int_NumberOfSamples);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_flt_VolumePerSample: "), i_flt_VolumePerSample);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_flt_DeadVolumeLabware: "), i_flt_DeadVolumeLabware);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_flt_DeadVolumeReagent (%): "), i_flt_DeadVolumeReagent);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_flt_MaximumVolumePerContainer: "), i_flt_MaximumVolumePerContainer);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_flt_ExtraVolume: "), i_flt_ExtraVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_int_DesiredNumberOfContainers: "), i_int_DesiredNumberOfContainers);
    l_flt_RealVolumePerSample = 0.0;
    l_flt_TotalVolumeNeeded = i_flt_VolumePerSample * i_int_NumberOfSamples;
    l_flt_DeadVolumeReagent = (i_flt_DeadVolumeReagent / 100.0) + 1.0;
    l_flt_TotalVolumeNeeded = l_flt_TotalVolumeNeeded * l_flt_DeadVolumeReagent;
    l_flt_TotalVolumeNeeded = l_flt_TotalVolumeNeeded + i_flt_ExtraVolume;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_flt_TotalVolumeNeeded Excluding Dead Volume Labware: "), l_flt_TotalVolumeNeeded);
    l_flt_MaximumVolumePerContainer = i_flt_MaximumVolumePerContainer - i_flt_DeadVolumeLabware;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_flt_MaximumVolumePerContainer: "), l_flt_MaximumVolumePerContainer);
    l_flt_VolumePerSampleIncludingDeadVolumeReagent = i_flt_VolumePerSample * l_flt_DeadVolumeReagent;
    l_flt_RealVolumePerSample = (i_flt_VolumePerSample * l_flt_DeadVolumeReagent);
    l_int_MaxNumberOfSamplesPerContainer = l_flt_MaximumVolumePerContainer / l_flt_RealVolumePerSample;
    l_int_MaxNumberOfSamplesPerContainer = MthFloor(l_int_MaxNumberOfSamplesPerContainer);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_MaxNumberOfSamplesPerContainer: "), l_int_MaxNumberOfSamplesPerContainer);
    l_int_NumberOfContainers = i_int_NumberOfSamples / (l_int_MaxNumberOfSamplesPerContainer * 1.0);
    l_int_NumberOfContainers = MthCeiling(l_int_NumberOfContainers);
    l_flt_TotalDeadVolumeLabware = i_flt_DeadVolumeLabware * l_int_NumberOfContainers;
    l_flt_TotalVolumeNeededIncludingDeadVolLabware = l_flt_TotalVolumeNeeded + l_flt_TotalDeadVolumeLabware;
    l_int_NumberOfContainers = l_flt_TotalVolumeNeededIncludingDeadVolLabware / (l_flt_MaximumVolumePerContainer * 1.0);
    l_int_NumberOfContainers = MthCeiling(l_int_NumberOfContainers);
    l_arr_fltVolumePerContainer.SetSize(0);
    l_arr_intNumberOfSamplesPerContainer.SetSize(0);
    l_bln_RecalculateTotalVolumeNeeded = ASWGLOBAL::BOOL::FALSE;
    if (i_int_DesiredNumberOfContainers == 0)
    {
      l_int_NumberOfContainerForCalculations = l_int_NumberOfContainers;
      l_bln_RecalculateTotalVolumeNeeded = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      if (i_int_DesiredNumberOfContainers >= l_int_NumberOfContainers)
      {
        l_int_NumberOfContainerForCalculations = i_int_DesiredNumberOfContainers;
        l_bln_RecalculateTotalVolumeNeeded = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        l_int_NumberOfContainerForCalculations = l_int_NumberOfContainers;
        l_bln_RecalculateTotalVolumeNeeded = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (l_bln_RecalculateTotalVolumeNeeded == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter6 = 0;
        while (1 == 1)
        {
          loopCounter6 = loopCounter6 + 1;
          l_flt_TotalDeadVolumeLabware = i_flt_DeadVolumeLabware * l_int_NumberOfContainerForCalculations;
          l_flt_TotalVolumeNeededAfterRecalculation = l_flt_TotalVolumeNeeded + l_flt_TotalDeadVolumeLabware;
          l_int_NumberOfContainersAfterRecalculation = l_flt_TotalVolumeNeededAfterRecalculation / (l_flt_MaximumVolumePerContainer * 1.0);
          l_int_NumberOfContainersAfterRecalculation = MthCeiling(l_int_NumberOfContainersAfterRecalculation);
          l_flt_TotalVolumeNeededIncludingDeadVolLabware = l_flt_TotalVolumeNeededAfterRecalculation;
          if (l_int_NumberOfContainersAfterRecalculation <= i_int_DesiredNumberOfContainers)
          {
            break;
          }
          else
          {
            l_int_NumberOfContainerForCalculations = l_int_NumberOfContainerForCalculations + 1;
          }
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_flt_TotalVolumeNeeded Including Dead Volume Labware: "), l_flt_TotalVolumeNeededIncludingDeadVolLabware);
    l_int_NumberOfSamplesPerContainer = i_int_NumberOfSamples / (l_int_NumberOfContainerForCalculations * 1.0);
    if (l_int_NumberOfSamplesPerContainer < 1)
    {
      MECC::TraceComment(Translate("Number of samples per container is less than 1. Overwritting value... l_int_NumberOfSamplesPerContainer = 1"));
      l_int_NumberOfSamplesPerContainer = 1;
      l_int_NumberOfContainerForCalculations = i_int_NumberOfSamples;
    }
    l_int_RemainingSamples = i_int_NumberOfSamples % l_int_NumberOfContainerForCalculations;
    l_int_NumberOfSamplesPerContainer = MthFloor(l_int_NumberOfSamplesPerContainer);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_NumberOfContainerForCalculations: "), l_int_NumberOfContainerForCalculations);
    l_extraVolumePerContainer = i_flt_ExtraVolume / (l_int_NumberOfContainerForCalculations * 1.0);
    {
      for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfContainerForCalculations;)
      {
        loopCounter5 = loopCounter5 + 1;
        l_int_NumberOfSamplesForThisContainer = 0;
        if (l_int_RemainingSamples > 0)
        {
          if (loopCounter5 <= l_int_RemainingSamples)
          {
            l_flt_VolumePerContainer = ((l_int_NumberOfSamplesPerContainer + 1) * l_flt_RealVolumePerSample) + i_flt_DeadVolumeLabware + l_extraVolumePerContainer;
            l_int_NumberOfSamplesForThisContainer = l_int_NumberOfSamplesPerContainer + 1;
          }
          else
          {
            l_flt_VolumePerContainer = ((l_int_NumberOfSamplesPerContainer) * l_flt_RealVolumePerSample) + i_flt_DeadVolumeLabware + l_extraVolumePerContainer;
            l_int_NumberOfSamplesForThisContainer = l_int_NumberOfSamplesPerContainer;
          }
        }
        else
        {
          l_flt_VolumePerContainer = ((l_int_NumberOfSamplesPerContainer) * l_flt_RealVolumePerSample) + i_flt_DeadVolumeLabware + l_extraVolumePerContainer;
          l_int_NumberOfSamplesForThisContainer = l_int_NumberOfSamplesPerContainer;
        }
        l_arr_intNumberOfSamplesPerContainer.AddAsLast(l_int_NumberOfSamplesForThisContainer);
        l_arr_fltVolumePerContainer.AddAsLast(l_flt_VolumePerContainer);
      }
    }
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_RELEASE, Translate("l_arr_fltVolumePerContainer"), Translate("l_arr_intNumberOfSamplesPerContainer"), l_arr_fltVolumePerContainer, l_arr_intNumberOfSamplesPerContainer);
    o_arr_fltVolumePerContainer=l_arr_fltVolumePerContainer;
    o_flt_TotalVolumeNeeded = l_flt_TotalVolumeNeededIncludingDeadVolLabware;
    o_int_NumberOfContainers = l_int_NumberOfContainerForCalculations;
  }

  function RetrieveCarrierPresence( variable i_strCarrierID, variable & o_blnIsPresent ) void {
    private variable l_intReturnSearchIndex;
    o_blnIsPresent = 0;
    l_intReturnSearchIndex = ARRAYTOOLS::Lookup(t_arrCarrierNameDistinct, i_strCarrierID);
    if (l_intReturnSearchIndex > 0)
    {
      Trace("result for searching carrier ID : ",l_intReturnSearchIndex);
      Trace("Carrier ID FOUND: ",i_strCarrierID);
      o_blnIsPresent = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      Trace("result for searching carrier ID : ",l_intReturnSearchIndex);
      Trace("Carrier ID NOT FOUND: ",i_strCarrierID);
      o_blnIsPresent = ASWGLOBAL::BOOL::FALSE;
    }
  }

  private function _DetermineIfSitesAreStacks( device & Instrument, variable i_strCarrierID, variable & o_arrblnIsStack[] ) void {
    private variable loopCounter1;
    private variable l_intSitesOnCarrier;
    private variable l_intSizeOfArray;
    private variable o_arrStrTemplateSiteIDs[];
    private variable o_arrStrTemplateSiteIDsDistinct[];
    private variable o_arrStrLabwareIDs[];
    private variable l_arrIndexesWithValue[];
    o_arrblnIsStack.SetSize( 0);
    o_arrblnIsStack.SetSize(0);
    HSLLabwrAccess::GetLabwareIDsAndTemplateSiteIDsForTemplateID(Instrument, i_strCarrierID, o_arrStrTemplateSiteIDs, o_arrStrLabwareIDs);
    ARRAYTOOLS::Sort2ArraysByNumericAscendingOrder(o_arrStrTemplateSiteIDs, o_arrStrLabwareIDs);
    ARRAYTOOLS::get_distinct_from_array(o_arrStrTemplateSiteIDs, o_arrStrTemplateSiteIDsDistinct);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arrStrLabwareIDs"), o_arrStrLabwareIDs);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arrStrTemplateSiteIDs"), o_arrStrTemplateSiteIDs);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arrStrTemplateSiteIDsDistinct"), o_arrStrTemplateSiteIDsDistinct);
    l_intSitesOnCarrier=o_arrStrTemplateSiteIDsDistinct.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSitesOnCarrier;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arrIndexesWithValue = HSLExtensions::Array::FindValue(o_arrStrTemplateSiteIDs, o_arrStrTemplateSiteIDsDistinct.ElementAt( loopCounter1 -1));
        TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Indexes That matched"), l_arrIndexesWithValue);
        l_intSizeOfArray=l_arrIndexesWithValue.GetSize();
        if (l_intSizeOfArray > 1)
        {
          o_arrblnIsStack.AddAsLast(1);
        }
        else
        {
          o_arrblnIsStack.AddAsLast(0);
        }
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Is Site a Stack?"), o_arrblnIsStack);
  }

  private function Display_StorePlate_Dialog( variable i_strMastermixToDisplay, variable i_strStorePlatePhoto ) void {
    private variable l_strSQLSentence;
    private variable l_strBottomText;
    private variable l_intReturnErrorDialog;
    private variable l_strTotalVolume;
    private variable l_strFullpathLoadingPicture;
    private variable file_RunData_DB_MasterMixComponentName_reformatted;
    private variable l_intReturnDisplayDialog;
    private variable loopCounter4;
    private variable l_intNumberOfMastermixToDisplay;
    private variable l_arrMastermixNames[];
    private variable l_arrColumnHeaders[];
    private variable l_arrMastermixDescription[];
    private variable l_arrMastermixVolumes[];
    l_arrMastermixNames.SetSize(0);
    l_arrMastermixVolumes.SetSize(0);
    l_arrMastermixDescription.SetSize(0);
    if (i_strMastermixToDisplay == "ALL")
    {
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Type] <> 'Reagent' AND [DB_Type] <> 'LabwareResource'","","","","","","","","","","","");
      Trace(l_strSQLSentence);
    }
    else
    {
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Type] <> 'Reagent' AND [DB_Type] <> 'LabwareResource' AND [DB_ReagentName] LIKE '%",i_strMastermixToDisplay,"'","","","","","","","","","");
      Trace(l_strSQLSentence);
    }
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter4 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter4 = loopCounter4 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (file_RunData_DB_Type == GlobalARW::ReagentType::SolutionComponent)
        {
          file_RunData_DB_MasterMixComponentName_reformatted = StrConcat4(Translate("---  "), file_RunData_DB_MasterMixComponentName, Translate(""), Translate(""));
          l_arrMastermixNames.AddAsLast(file_RunData_DB_MasterMixComponentName_reformatted);
        }
        else
        {
          l_arrMastermixNames.AddAsLast(file_RunData_DB_ReagentName);
        }
        _GenerateString(file_RunData_DB_TotalVolume, l_strTotalVolume);
        l_arrMastermixDescription.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
        l_arrMastermixVolumes.AddAsLast(l_strTotalVolume);
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    l_intNumberOfMastermixToDisplay=l_arrMastermixNames.GetSize();
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("MasterMix Names"), l_arrMastermixNames);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("MasterMix Volumes"), l_arrMastermixVolumes);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("MasterMix Descriptions"), l_arrMastermixDescription);
    if (l_intNumberOfMastermixToDisplay > 0)
    {
      l_arrColumnHeaders.SetSize(0);
      l_arrColumnHeaders.AddAsLast(Translate("Name"));
      l_arrColumnHeaders.AddAsLast(Translate("Volume (µL)"));
      l_arrColumnHeaders.AddAsLast(Translate("Description"));
      l_intReturnErrorDialog = VectorCustomDialogs::LoadingDialogSetResources(l_arrColumnHeaders);
      _CheckBindReturnValueVectorCustomDialogs(l_intReturnErrorDialog);
      l_strBottomText = StrConcat4(Translate("A .csv file will be automatically created at following directory : "), Translate("\nC:\\Program Files (x86)\\HAMILTON\\Logfiles\\"), Translate(""), Translate(""));
      l_strFullpathLoadingPicture = StrConcat12(t_strLoadingPicturesFileDirectory, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), i_strStorePlatePhoto, Translate(""), Translate(""), Translate(""), Translate(""));
      l_arrMastermixDescription = HSLExtensions::Array::ConvertToStringArray(l_arrMastermixDescription);
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate("Store Plate Preparation"), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Prepare plate according to instructions below. Press OK to Continue"), l_strBottomText, l_strFullpathLoadingPicture, Translate(""), 300, l_arrMastermixNames, l_arrMastermixVolumes, l_arrMastermixDescription);
      _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
      _PrintToFile(l_arrMastermixNames, l_arrMastermixVolumes, l_arrMastermixDescription);
    }
  }
} // library namespace
