#pragma once
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "STAR Tools\\STAR MPH96 Tools.hs_"
#include "HSLTimLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMthLib.hsl"
#include "HSLInhecoTEC\\HSLInhecoTECLib.hsl"
#include "HSLStrLib.hsl"
#include "HslHamHeaterShakerLib.hsl"
#include "HSLUtilLib.hsl"
#include "libraries\\HSLFileDirectoryLib.hsl"
#include "libraries\\HSLFileDirectoryLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace PARSELIBRARY_EXTERNAL {
  variable _bTipsLoaded_300(0);
  variable _intSeqPosition_TipSupport50(97);
  variable _intSeqPosition_TipSupport300(97);
  variable _bTipsLoaded_50(0);
  variable _bResetSupportSequence_50(0);
  variable _bResetSupportSequence_300(0);
  function CreateTempFile( variable _inStrFilePath, variable _inStrCopyDirectoryPath, variable & _outStrTempFilePath ) void ;
  function GenerateTubeSequence( sequence & _inSeq, variable _inLabwareID, variable _inPositionID ) void ;
  function ISwapBounce( device & ML_STAR, sequence _sequence, variable _iSwapGripHeight_mm, variable _iSwapGripWidth_mm, variable _iSwapGripOpening_mm, variable _iSwapGripForce, variable _iSwapGripTolerance_mm, variable _inverseGrip, variable _cycles, variable _bounceHeight, variable _increment, variable _parkiSwap ) void ;
  function TipPickupCORE96( device & MLSTAR, sequence & _seqTipSequence, sequence & _seqTipSupport_300, sequence & _seqTipSupport_50, variable _sizeTip, variable _numberSample, variable _pickupTips ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_MPH96_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    STAR_MPH96_TOOLS::_ExitLibrary();
  }

  function TipPickupCORE96( device & MLSTAR, sequence & _seqTipSequence, sequence & _seqTipSupport_300, sequence & _seqTipSupport_50, variable _sizeTip, variable _numberSample, variable _pickupTips ) variable {
    private variable _numColumnsToPickUp;
    private variable _bTipsLoaded;
    private sequence _seqTipSupport;
    private variable _intSeqPosition_TipSupport(97);
    private variable _bSufficientTipsAvailable;
    private variable _labwareId;
    private variable _positionId;
    private sequence _seqPickup;
    private variable _returnValue;
    private variable _bResetSupportSequence;
    private variable ALWAYS_TRUE;
    private variable _bTipsOnHead;
    _returnValue = 0;
    _numColumnsToPickUp = 0;
    _numColumnsToPickUp = MthCeiling(_numberSample/8.0);
    Trace("Picking up ", _numColumnsToPickUp, " columns.");
    _bSufficientTipsAvailable = 0;
    if (_sizeTip == 300)
    {
      SeqCopySequence(_seqTipSupport, _seqTipSupport_300);
      _bTipsLoaded = _bTipsLoaded_300;
      _bResetSupportSequence = _bResetSupportSequence_300;
      _intSeqPosition_TipSupport = _intSeqPosition_TipSupport300;
    }
    if (_sizeTip == 50)
    {
      SeqCopySequence(_seqTipSupport, _seqTipSupport_50);
      _bTipsLoaded = _bTipsLoaded_50;
      _bResetSupportSequence = _bResetSupportSequence_50;
      _intSeqPosition_TipSupport = _intSeqPosition_TipSupport50;
    }
    if (_numberSample > 0)
    {
      if (_bTipsLoaded == 0)
      {
        MLSTAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        MLSTAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        _bTipsLoaded = 1;
        if (_bResetSupportSequence == 1)
        {
          _intSeqPosition_TipSupport = 97;
          _bResetSupportSequence = 0;
        }
      }
      if (_bTipsLoaded == 1)
      {
        if (_pickupTips == 1)
        {
          { variable _numTipsNeeded;
            _numTipsNeeded = _numColumnsToPickUp * 8;
            // Tips are used from right to left, so decrement sequence position by # of tips used to find pickup position
            if (_intSeqPosition_TipSupport >= _numTipsNeeded){
                 _intSeqPosition_TipSupport = _intSeqPosition_TipSupport - _numTipsNeeded;
                 Trace("Tip support sequence position: ", _intSeqPosition_TipSupport);
                 _bSufficientTipsAvailable = 1;
            }
            else {
                 _bSufficientTipsAvailable = 0;
            }
            // If tips would be picked up from column 1, rack has been used up. Unset 'loaded' flag to indicate more must be loaded.
            if (_intSeqPosition_TipSupport == 1){
                 _bTipsLoaded = 0;
                 _bResetSupportSequence = 1;
            }
          }
          if (_bSufficientTipsAvailable == 1)
          {
            _seqTipSupport.SetCurrentPosition(_intSeqPosition_TipSupport);
            SeqCopySequence(_seqPickup, _seqTipSupport);
            SeqRemoveAll(_seqPickup);
            _labwareId = SeqGetLabwareId(_seqTipSupport);
            _positionId = SeqGetPositionId(_seqTipSupport);
            SeqAdd(_seqPickup, _labwareId, _positionId);
            _seqPickup.SetCurrentPosition(1);
            MLSTAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          }
          else
          {
            Trace("Error: Incompatible CO-RE 96 head tip pickup request. Requested number of tips would exceed tips remaining in rack.");
            _returnValue = 1;
          }
        }
      }
    }
    else
    {
      if (_bTipsLoaded == 1)
      {
        STAR_MPH96_TOOLS::TOOL_GetTipPresence(MLSTAR, _bTipsOnHead);
        ALWAYS_TRUE = hslTrue;
        if (_bTipsOnHead == ALWAYS_TRUE)
        {
          MLSTAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
        _seqTipSupport.SetCurrentPosition(1);
        MLSTAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        // Decrement tip sequence by one full rack to ensure tips are unloaded to the correct position
        _seqTipSequence.SetCurrentPosition(MthMax(_seqTipSequence.GetCurrentPosition() - 96, 1));
        MLSTAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        _bTipsLoaded = 0;
      }
    }
    if (_sizeTip == 300)
    {
      _bTipsLoaded_300 = _bTipsLoaded;
      _bResetSupportSequence_300 = _bResetSupportSequence;
      _intSeqPosition_TipSupport300 = _intSeqPosition_TipSupport;
    }
    if (_sizeTip == 50)
    {
      _bTipsLoaded_50 = _bTipsLoaded;
      _bResetSupportSequence_50 = _bResetSupportSequence;
      _intSeqPosition_TipSupport50 = _intSeqPosition_TipSupport;
    }
    return (_returnValue);
  }

  function ISwapBounce( device & ML_STAR, sequence _sequence, variable _iSwapGripHeight_mm, variable _iSwapGripWidth_mm, variable _iSwapGripOpening_mm, variable _iSwapGripForce, variable _iSwapGripTolerance_mm, variable _inverseGrip, variable _cycles, variable _bounceHeight, variable _increment, variable _parkiSwap ) void {
    private variable _coordX;
    private variable _coordY;
    private variable i;
    private variable _coordZ;
    private variable _labwareID;
    private variable j;
    private variable _firmwareParameter;
    private variable _parameterSlowMovement;
    private variable _labwareAngle;
    private variable _remainHeight;
    private variable _parameterOpenGripper;
    private variable _gripperOpening;
    Trace("================");
    _labwareID = SeqGetLabwareId(_sequence);
    DevGetLabwarePosition(ML_STAR, _labwareID, _coordX, _coordY, _coordZ, _labwareAngle);
    Trace("Z = ", _coordZ);
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    _firmwareParameter = Translate("");
    /*
     Max Clearance for iSwap is roughlyl 279.2 mm
     */
    _coordZ = (278.2 - _coordZ) * 10;
    _coordZ = MthRound(_coordZ, 0);
    _firmwareParameter = "gz"+StrIStr(_coordZ)+"zd1";
    Trace(_firmwareParameter);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    _increment = _increment * 10;
    _increment = MthRound(_increment, 0);
    _bounceHeight = _bounceHeight*10;
    _remainHeight = 0;
    {
      for(i = 0; i < _cycles;)
      {
        i = i + 1;
        _parameterSlowMovement = "gz"+StrIStr(_increment)+"zd0";
        Trace(_parameterSlowMovement);
        {
          j = 0;
          while (_remainHeight < _bounceHeight)
          {
            j = j + 1;
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            _remainHeight = _remainHeight + _increment;
            Trace(_remainHeight, " - ", _bounceHeight);
          }
        }
        _parameterSlowMovement = "gz"+StrIStr(_increment)+"zd1";
        Trace(_parameterSlowMovement);
        {
          j = 0;
          while (_remainHeight > 0)
          {
            j = j + 1;
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            _remainHeight = _remainHeight - _increment;
            Trace(_remainHeight, " - ", _bounceHeight);
          }
        }
      }
    }
    _gripperOpening = _iSwapGripOpening_mm * 10; // Convert to 0.1mms for firmware command
    _gripperOpening = MthRound(_gripperOpening, 0);
    _parameterOpenGripper = "go"+StrIStr(_gripperOpening);
    Trace(_parameterOpenGripper);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    /*
     Max Clearance for iSwap is roughlyl 279.2 mm
     */
    _firmwareParameter = "gz"+StrIStr(_coordZ)+"zd0";
    Trace(_firmwareParameter);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    if (_parkiSwap == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function GenerateTubeSequence( sequence & _inSeq, variable _inLabwareID, variable _inPositionID ) void {
    private variable i;
    { sequence __temp; _inSeq = __temp; }
    SeqRemoveAll(_inSeq);
    {
      for(i = 0; i < 8;)
      {
        i = i + 1;
        SeqAdd(_inSeq, _inLabwareID, _inPositionID);
      }
    }
    _inSeq.SetCurrentPosition(1);
  }

  function CreateTempFile( variable _inStrFilePath, variable _inStrCopyDirectoryPath, variable & _outStrTempFilePath ) void {
    private variable _strTime;
    private variable _strDate;
    private variable _strTempFileName;
    private variable _strFileName;
    private variable _strReturn;
    private variable _intReturn;
    _outStrTempFilePath = 0;
    _strDate = TimGetFormattedDate(Translate("%y%m%d"));
    _strTime = TimGetFormattedTime(Translate("%H%M%S"));
    // Extract input file name
    _strFileName = StrMid(_inStrFilePath, StrReverseFind(_inStrFilePath, "\\")+1, 255);
    _strTempFileName = _strDate + _strTime + "_"+_strFileName;
    _outStrTempFilePath = _inStrCopyDirectoryPath+"\\" + _strTempFileName;
    Trace(_outStrTempFilePath);
    _intReturn = FileDirectoryLib::CreateDirectory(_inStrCopyDirectoryPath);
    Trace("Create Directory Return Code: ", _intReturn);
    _intReturn = FileDirectoryLib::CopyFile(_inStrFilePath, _outStrTempFilePath);
    Trace("Copy File Return Code: ", _intReturn);
  }
} // library namespace
