#pragma once
#include "HSLTrcLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace CHECKCARRIERPRESENCE {
  function CheckCarrierPresenceByArrOfLabIDs( device & iInstrument, variable & iArrLabIDs[], variable & oArrLabIDsNotLoaded[] ) variable ;
  function CheckCarrierPresenceByLabID( device & iInstrument, variable iLabIDOfCarrier ) variable ;
  function CheckCarrierPresenceByTrackNumber( device & iInstrument, variable iTrackNumber ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function CheckCarrierPresenceByLabID( device & iInstrument, variable iLabIDOfCarrier ) variable {
    private variable xCoord;
    private variable angle;
    private variable zCoord;
    private variable yCoord;
    private variable width_MM;
    private variable rightTrack;
    private variable retVal_FirmwareCommand;
    private variable retVal_FirmwareCommand_new;
    private variable strRight_FirmwareCommand;
    private variable loopCounter1;
    private variable strLeft;
    private variable binaryString;
    private variable arrBinaryVallues[];
    private variable trackToCheck;
    private variable numberOfTracks;
    numberOfTracks = DevGetLabwareData(iInstrument, iLabIDOfCarrier, Translate("MlStarCarWidthAsT"));
    numberOfTracks = StrIVal(numberOfTracks);
    DevGetLabwarePosition(iInstrument, iLabIDOfCarrier, xCoord, yCoord, zCoord, angle);
    xCoord = xCoord - 100;
    width_MM = numberOfTracks * 22.5;
    rightTrack = xCoord + width_MM;
    rightTrack = rightTrack / 22.5;
    rightTrack = MthFloor(rightTrack);
    {
      	variable arrRetValues[];
      	arrRetValues = iInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	retVal_FirmwareCommand = arrRetValues[3];
    }
    retVal_FirmwareCommand_new = StrLeft(retVal_FirmwareCommand, 23);
    retVal_FirmwareCommand_new = StrRight(retVal_FirmwareCommand_new, 14);
    binaryString = Translate("");
    arrBinaryVallues.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < 14;)
      {
        loopCounter1 = loopCounter1 + 1;
        strRight_FirmwareCommand = StrRight(retVal_FirmwareCommand_new, loopCounter1);
        strLeft = StrLeft(strRight_FirmwareCommand, 1);
        if (strLeft == "0")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "1")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "2")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "3")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "4")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "5")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "6")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "7")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "8")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "9")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "A")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "B")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "C")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "D")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "E")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "F")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
        }
      }
    }
    trackToCheck=arrBinaryVallues.GetAt(rightTrack-1);
    if (trackToCheck == 1)
    {
      return (1);
    }
    else
    {
      return (0);
    }
  }

  function CheckCarrierPresenceByArrOfLabIDs( device & iInstrument, variable & iArrLabIDs[], variable & oArrLabIDsNotLoaded[] ) variable {
    private variable xCoord;
    private variable retVal_FirmwareCommand_new;
    private variable width_MM;
    private variable trackToCheck;
    private variable retVal_FirmwareCommand;
    private variable strRight_FirmwareCommand;
    private variable loopCounter1;
    private variable rightTrack;
    private variable binaryString;
    private variable strLeft;
    private variable angle;
    private variable zCoord;
    private variable yCoord;
    private variable arrBinaryVallues[];
    private variable numberOfLabIDsToCheck;
    private variable loopCounter2;
    private variable flagLabIDNotLoaded;
    private variable numberOfTracks;
    oArrLabIDsNotLoaded.SetSize( 0);
    numberOfLabIDsToCheck=iArrLabIDs.GetSize();
    flagLabIDNotLoaded = 0;
    {
      for(loopCounter2 = 0; loopCounter2 < numberOfLabIDsToCheck;)
      {
        loopCounter2 = loopCounter2 + 1;
        numberOfTracks = DevGetLabwareData(iInstrument, iArrLabIDs.ElementAt( loopCounter2 -1), Translate("MlStarCarWidthAsT"));
        numberOfTracks = StrIVal(numberOfTracks);
        DevGetLabwarePosition(iInstrument, iArrLabIDs.ElementAt( loopCounter2 -1), xCoord, yCoord, zCoord, angle);
        xCoord = xCoord - 100;
        width_MM = numberOfTracks * 22.5;
        rightTrack = xCoord + width_MM;
        rightTrack = rightTrack / 22.5;
        rightTrack = MthFloor(rightTrack);
        {
          	variable arrRetValues[];
          	arrRetValues = iInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	retVal_FirmwareCommand = arrRetValues[3];
        }
        retVal_FirmwareCommand_new = StrLeft(retVal_FirmwareCommand, 23);
        retVal_FirmwareCommand_new = StrRight(retVal_FirmwareCommand_new, 14);
        binaryString = Translate("");
        arrBinaryVallues.SetSize(0);
        {
          for(loopCounter1 = 0; loopCounter1 < 14;)
          {
            loopCounter1 = loopCounter1 + 1;
            strRight_FirmwareCommand = StrRight(retVal_FirmwareCommand_new, loopCounter1);
            strLeft = StrLeft(strRight_FirmwareCommand, 1);
            if (strLeft == "0")
            {
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
            }
            if (strLeft == "1")
            {
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
            }
            if (strLeft == "2")
            {
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
            }
            if (strLeft == "3")
            {
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
            }
            if (strLeft == "4")
            {
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
            }
            if (strLeft == "5")
            {
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
            }
            if (strLeft == "6")
            {
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
            }
            if (strLeft == "7")
            {
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
            }
            if (strLeft == "8")
            {
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
            }
            if (strLeft == "9")
            {
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
            }
            if (strLeft == "A")
            {
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
            }
            if (strLeft == "B")
            {
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
            }
            if (strLeft == "C")
            {
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
            }
            if (strLeft == "D")
            {
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
            }
            if (strLeft == "E")
            {
              arrBinaryVallues.AddAsLast(0);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
            }
            if (strLeft == "F")
            {
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
              arrBinaryVallues.AddAsLast(1);
            }
          }
        }
        trackToCheck=arrBinaryVallues.GetAt(rightTrack-1);
        if (trackToCheck == 0)
        {
          flagLabIDNotLoaded = 1;
          oArrLabIDsNotLoaded.AddAsLast(iArrLabIDs.ElementAt( loopCounter2 -1));
        }
      }
    }
    if (flagLabIDNotLoaded == 1)
    {
      return (1);
    }
    else
    {
      return (0);
    }
  }

  function CheckCarrierPresenceByTrackNumber( device & iInstrument, variable iTrackNumber ) variable {
    private variable xCoord;
    private variable width_MM;
    private variable retVal_FirmwareCommand_new;
    private variable numberOfTracks;
    private variable trackToCheck;
    private variable retVal_FirmwareCommand;
    private variable strRight_FirmwareCommand;
    private variable loopCounter1;
    private variable rightTrack;
    private variable angle;
    private variable zCoord;
    private variable binaryString;
    private variable strLeft;
    private variable yCoord;
    private variable arrBinaryVallues[];
    {
      	variable arrRetValues[];
      	arrRetValues = iInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	retVal_FirmwareCommand = arrRetValues[3];
    }
    retVal_FirmwareCommand_new = StrLeft(retVal_FirmwareCommand, 23);
    retVal_FirmwareCommand_new = StrRight(retVal_FirmwareCommand_new, 14);
    binaryString = Translate("");
    arrBinaryVallues.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < 14;)
      {
        loopCounter1 = loopCounter1 + 1;
        strRight_FirmwareCommand = StrRight(retVal_FirmwareCommand_new, loopCounter1);
        strLeft = StrLeft(strRight_FirmwareCommand, 1);
        if (strLeft == "0")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "1")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "2")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "3")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "4")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "5")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "6")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "7")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
        }
        if (strLeft == "8")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "9")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "A")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "B")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "C")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "D")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "E")
        {
          arrBinaryVallues.AddAsLast(0);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
        }
        if (strLeft == "F")
        {
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
          arrBinaryVallues.AddAsLast(1);
        }
      }
    }
    trackToCheck=arrBinaryVallues.GetAt(iTrackNumber-1);
    if (trackToCheck == 1)
    {
      return (1);
    }
    else
    {
      return (0);
    }
  }
} // library namespace
