#pragma once
#include "HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLSensorLib.hsl"
#include "HSLInhecoTEC\\HSLInhecoTECLib.hsl"
#include "Inheco ODTC\\Inheco ODTC.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMthLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "NGS\\RemoveTextDelimitersFromAsciiTextFile.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NGSSTAR384PREP {
  variable _blnSimulationModeON;
  private function Abstract(  ) void ;
  function DATA_ReadSamplePlateFile( variable & var_SourceFile, variable & var_NumberOfSamples, variable & var_IndexesUsed, variable & arr_Index1SeqPositions[], variable & arr_Index2SeqPositions[], variable & arr_ALPseqPositions[], variable i_strTempSamplePlateFileName ) void ;
  function DATA_ReadSampleSheet( variable & var_SourceFile, variable & var_NumberOfSamples, variable & var_IndexesUsed, variable & arr_Index1SeqPositions[], variable & arr_Index2SeqPositions[], variable & arr_ALPseqPositions[], variable i_strTempSampleSheetFileName ) void ;
  function HHS_GetTemperature( variable i_varHHS ) void ;
  function HHS_Init( variable & i_varHHSDeviceNo1, variable & i_varHHSDeviceNo2 ) void ;
  function HHS_SetTemperature( variable i_varHHS, variable i_fltTemperature ) void ;
  function HHS_Shake( variable i_varHHS, variable i_intSpeed, variable i_intShakingDuration ) void ;
  function HHS_Terminate( variable i_varHHSDeviceNo1, variable i_varHHSDeviceNo2 ) void ;
  function HandOverSimulationModeForAllLocalSMTs( variable i_blnSimulationON ) void ;
  function ODTC_CloseDoor( variable i_IntDeviceNumber ) void ;
  function ODTC_ExecuteProtocol( variable i_IntDeviceNumber, variable i_strProtocollFullFileName, variable i_strNameOfProtocollOnDevice, variable & o_intTimeForProtocol, variable & o_intRequestIDForActiveProtocol ) void ;
  function ODTC_Init( variable i_strDeviceAddress, variable & o_intDeviceNum, variable i_strLocalIPAdress ) void ;
  function ODTC_OpenDoor( variable i_IntDeviceNumber ) void ;
  function ODTC_ReadActualTemperature( variable i_IntDeviceNumber, variable i_intTimeForProtocoll ) void ;
  function ODTC_Terminate( variable i_intDeviceNum ) void ;
  function ODTC_WaitForStartedProtocolToFinish( variable i_IntDeviceNumber, variable i_intTimeOut, variable i_intRequestIDToWaitFor ) void ;
  private function _ODTC_HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName, variable i_intReturnValue, variable i_strMessage ) void ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function Abstract(  ) void {
    MECC::TraceComment(Translate("*********************************************************************\nSubmethod Library:  NGSStar384Prep\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate:  June 18, 2018 (Modified by Andy Joad)\nVersion:  1.8\n\nVersion Notes:\n1.  Continuing adaptions listed at local smt \"_Version\"\n\n*********************************************************************"));
  }

  function HHS_Init( variable & i_varHHSDeviceNo1, variable & i_varHHSDeviceNo2 ) void {
    private variable ret_HHS1;
    private variable ret_HHS2;
    private variable ret_HHS;
    private variable DialogReturn;
    private variable loopCounter1;
    private dialog customDialog_1;
    private dialog customDialog_2;
    i_varHHSDeviceNo1 = 0;
    i_varHHSDeviceNo2 = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  HHS_Init <<<<<<<<<<"));
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        HSLHamHeaterShaker::SetSimulation(_blnSimulationModeON);
        ret_HHS = 0;
        ret_HHS1 = HSLHamHeaterShaker::CreateUsbDevice(1, i_varHHSDeviceNo1);
        ret_HHS2 = HSLHamHeaterShaker::CreateUsbDevice(2, i_varHHSDeviceNo2);
        if (ret_HHS1 != 0)
        {
          Trace ("Error on HHS1:  ", ret_HHS1);
        }
        if (ret_HHS2 != 0)
        {
          Trace ("Error on HHS2:  ", ret_HHS2);
        }
        ret_HHS = ret_HHS1 + ret_HHS2;
        if (ret_HHS > 0)
        {
          MECC::TraceComment(Translate("\n\nHHS Error codes:\n1 - Fatal Error\n2 - Node not Initialized\n3 - Device not connected\n4 - CAN error\n5 - EEProm error\n6 - Unknown command\n7 - Unknown parameter\n8 - Parameter out of range\n9 - Voltage error\n10 - Stop \n11 - Wrong address\n13 - Shaker init failed\n14 - Shaker not initialized\n15 - Shaker step loss\n17 - Plate lock init failure\n18 - Plate lock step loss\n26 - Unknown firmware error\n\n"));
          customDialog_2.InitCustomDialog("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");
          customDialog_2.SetCustomDialogProperty( "textBlock3.Text", ret_HHS );
          customDialog_2.ShowCustomDialog();
          DialogReturn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
          if (DialogReturn == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
          }
        }
        else
        {
          break;
        }
      }
    }
    ret_HHS1 = HSLHamHeaterShaker::SetPlateLock(i_varHHSDeviceNo1, 1);
    ret_HHS1 = HSLHamHeaterShaker::SetPlateLock(i_varHHSDeviceNo1, 0);
    ret_HHS2 = HSLHamHeaterShaker::SetPlateLock(i_varHHSDeviceNo2, 1);
    ret_HHS2 = HSLHamHeaterShaker::SetPlateLock(i_varHHSDeviceNo2, 0);
    if (ret_HHS1 != 0)
    {
      Trace ("Error on HHS1:  ", ret_HHS1);
    }
    if (ret_HHS2 != 0)
    {
      Trace ("Error on HHS2:  ", ret_HHS2);
    }
    ret_HHS = ret_HHS1 + ret_HHS2;
    if (ret_HHS > 0)
    {
      MECC::TraceComment(Translate("\n\nHHS Error codes:\n1 - Fatal Error\n2 - Node not Initialized\n3 - Device not connected\n4 - CAN error\n5 - EEProm error\n6 - Unknown command\n7 - Unknown parameter\n8 - Parameter out of range\n9 - Voltage error\n10 - Stop \n11 - Wrong address\n13 - Shaker init failed\n14 - Shaker not initialized\n15 - Shaker step loss\n17 - Plate lock init failure\n18 - Plate lock step loss\n26 - Unknown firmware error\n\n"));
      customDialog_1.InitCustomDialog("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");
      customDialog_1.SetCustomDialogProperty( "textBlock3.Text", ret_HHS );
      customDialog_1.ShowCustomDialog();
      DialogReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: HHS_Init <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HHS_Shake( variable i_varHHS, variable i_intSpeed, variable i_intShakingDuration ) void {
    private variable ActualShakingDuration;
    private timer Shaking;
    private variable CheckForEarlyStop;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  HHS_Shake <<<<<<<<<<"));
    Trace ("***** Now shaking on HHS", i_varHHS, " at ", i_intSpeed, "rpm for ", i_intShakingDuration, "seconds...");
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLHamHeaterShaker::StartShaker(i_varHHS, i_intSpeed);
      if( 0 == Shaking.SetTimer(i_intShakingDuration) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      CheckForEarlyStop = Shaking.WaitTimer(hslTrue, hslTrue);
      if (0 == CheckForEarlyStop)
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (CheckForEarlyStop == 3)
      {
        MECC::TraceComment(Translate("***** WARNING!  The shaking was stopped prematurely by the operator! *****"));
      }
      ActualShakingDuration = Shaking.GetElapsedTime();
      Trace ("***** Actual Shaking Duration (seconds):  ", ActualShakingDuration);
      HSLHamHeaterShaker::StopShaker(i_varHHS);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - HHS SHAKE simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  HHS_Shake <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HHS_SetTemperature( variable i_varHHS, variable i_fltTemperature ) void {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  HHS_SetTemperature <<<<<<<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLHamHeaterShaker::StopTempCtrl(i_varHHS);
      if (i_fltTemperature != 0)
      {
        Trace ("***** HHS number ", i_varHHS, " is being set to ", i_fltTemperature, " C");
        HSLHamHeaterShaker::StartTempCtrl(i_varHHS, i_fltTemperature, 0);
      }
      else
      {
        Trace ("***** HHS number ", i_varHHS, " is not being controlled, as it is desired to be at room temperature.");
      }
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - HHS set temperature"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  HHS_SetTemperature <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HHS_Terminate( variable i_varHHSDeviceNo1, variable i_varHHSDeviceNo2 ) void {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: HHS_Terminate <<<<<<<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLHamHeaterShaker::StopAllShaker();
      Trace ("***** All HHS are not being controlled, as it is desired to be at room temperature.");
      if (i_varHHSDeviceNo1 != ASWGLOBAL::BOOL::FALSE)
      {
        HSLHamHeaterShaker::StopTempCtrl(i_varHHSDeviceNo1);
      }
      if (i_varHHSDeviceNo2 != ASWGLOBAL::BOOL::FALSE)
      {
        HSLHamHeaterShaker::StopTempCtrl(i_varHHSDeviceNo2);
      }
      HSLHamHeaterShaker::Terminate();
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - Termination simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: HHS_Terminate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HHS_GetTemperature( variable i_varHHS ) void {
    private variable ActualTemperatureNow;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>> Submethod:  HHS_GetTemperature <<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLHamHeaterShaker::GetTemperature(i_varHHS, ActualTemperatureNow);
      Trace ("***** The current temperature for HHS", i_varHHS, " is ", ActualTemperatureNow, "C *****");
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - HHS get temperature"));
      Trace ("***** The current temperature for HHS", i_varHHS, " is ", ActualTemperatureNow, "C *****");
    }
    MECC::TraceComment(Translate(">>>>> Submethod Complete:  HHS_GetTemperature <<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _Version(  ) void {
  }

  function ODTC_Init( variable i_strDeviceAddress, variable & o_intDeviceNum, variable i_strLocalIPAdress ) void {
    private variable strDeviceID;
    private variable strState;
    private variable blnReturn;
    private variable intReturnValue;
    private variable strCurrentTime;
    private variable blnLocked;
    private variable strMessage;
    private variable strPmsID;
    private variable strTrace;
    o_intDeviceNum = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>>  Start Submethod : ODTC_Init<<<<<<<<<<"));
    Trace ("_blnSimulationModeON:  ", _blnSimulationModeON);
    Trace ("i_strLocalIPAdress:  ", i_strLocalIPAdress);
    Trace ("i_strDeviceAddress:  ", i_strDeviceAddress);
    Inheco_ODTC::Standard::SetTraceLevel(TRACE_LEVEL_DEBUG);
    blnReturn = Inheco_ODTC::Standard::Connect(i_strLocalIPAdress, i_strDeviceAddress, Translate(""), _blnSimulationModeON, o_intDeviceNum, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::Initialize", intReturnValue, strMessage);
    blnReturn = Inheco_ODTC::Standard::Reset(o_intDeviceNum, _blnSimulationModeON, 120, Translate(""), Translate(""), Translate(""), intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ResetDevice", intReturnValue, strMessage);
    blnReturn = Inheco_ODTC::Standard::Initialize(o_intDeviceNum, Translate(""), intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::InitializeDevice", intReturnValue, strMessage);
    blnReturn = Inheco_ODTC::Standard::GetStatus(o_intDeviceNum, strDeviceID, strState, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    strTrace = StrConcat12("strDeviceID = ", strDeviceID, ", strState = ", strState, ", blnLocked = ", blnLocked, ", strPMSID = ", strPmsID, ", strCurrentDeviceTime = ", strCurrentTime, ", intReturnValue = ", intReturnValue);
    strTrace = StrConcat4(strTrace, ", strMessage = ", strMessage, "");
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strTrace);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete : ODTC_Init <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _ODTC_HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName, variable i_intReturnValue, variable i_strMessage ) void {
    private variable strMethodName;
    private variable strTrace;
    private variable retValueDialog;
    private dialog customDialog_3;
    if (i_blnSuccess == ASWGLOBAL::BOOL::TRUE)
    {
      strTrace = StrConcat4("SiLA message was '", i_strMessage, "', SiLA return value was ", i_intReturnValue);
      Trace ("***** Trace successful message = ", strTrace);
      return;
    }
    else
    {
      strTrace = StrConcat4("SiLA message was '", i_strMessage, "', SiLA return value was ", i_intReturnValue);
      customDialog_3.InitCustomDialog("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");
      customDialog_3.SetCustomDialogProperty( "textBlock3.Text", i_strFunctionName );
      customDialog_3.SetCustomDialogProperty( "textBlock4.Text", strMethodName );
      customDialog_3.SetCustomDialogProperty( "textBlock5.Text", strTrace );
      customDialog_3.ShowCustomDialog();
      retValueDialog = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
      if (retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
    }
  }

  function ODTC_Terminate( variable i_intDeviceNum ) void {
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Start Submethod : ODTC_Terminate <<<<<<<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      blnReturn = Inheco_ODTC::Standard::StopMethod(i_intDeviceNum, Translate(""), intReturnValue, strMessage);
      _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::StopMethod", intReturnValue, strMessage);
      blnReturn = Inheco_ODTC::Standard::Terminate(i_intDeviceNum, strMessage);
      _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::Terminate", intReturnValue, strMessage);
    }
    MECC::TraceComment(Translate(">>>>>>>>>>  Submethod Complete : ODTC_Terminate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_OpenDoor( variable i_IntDeviceNumber ) void {
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_OpenDoor:  Start Submethod <<<<<<<<<<"));
    blnReturn = Inheco_ODTC::Standard::OpenDoor(i_IntDeviceNumber, Translate(""), intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::OpenDoor", intReturnValue, strMessage);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_OpenDoor:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_CloseDoor( variable i_IntDeviceNumber ) void {
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_CloseDoor:  Start Submethod <<<<<<<<<<"));
    blnReturn = Inheco_ODTC::Standard::CloseDoor(i_IntDeviceNumber, Translate(""), intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::CloseDoor", intReturnValue, strMessage);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_CloseDoor:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_WaitForStartedProtocolToFinish( variable i_IntDeviceNumber, variable i_intTimeOut, variable i_intRequestIDToWaitFor ) void {
    private variable strDeviceID;
    private variable strState;
    private variable blnReturn;
    private variable intReturnValue;
    private variable strCurrentTime;
    private variable blnLocked;
    private variable strMessage;
    private variable strPmsID;
    private variable strTrace;
    private variable intTimeToWait;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_WaitForStartedProtocolToFinish:  Start Submethod <<<<<<<<<<"));
    intTimeToWait = i_intTimeOut + 20;
    strTrace = StrConcat2("Effective time to wait before an error is triggered = ", intTimeToWait);
    Trace ("***** Message = ", strTrace);
    blnReturn = Inheco_ODTC::Standard::WaitForEndOfExecuteMethod(i_IntDeviceNumber, intTimeToWait, i_intRequestIDToWaitFor, intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish", intReturnValue, strMessage);
    blnReturn = Inheco_ODTC::Standard::GetStatus(i_IntDeviceNumber, strDeviceID, strState, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    strTrace = StrConcat12("strDeviceID = ", strDeviceID, ", strState = ", strState, ", blnLocked = ", blnLocked, ", strPMSID = ", strPmsID, ", strCurrentDeviceTime = ", strCurrentTime, ", intReturnValue = ", intReturnValue);
    strTrace = StrConcat4(strTrace, ", strMessage = ", strMessage, "");
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strTrace);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_WaitForStartedProtocolToFinish:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_ReadActualTemperature( variable i_IntDeviceNumber, variable i_intTimeForProtocoll ) void {
    private variable strDeviceID;
    private variable strState;
    private variable blnReturn;
    private variable strTime;
    private variable fltElapsedTime;
    private variable intReturnValue;
    private variable strCurrentTime;
    private variable blnLocked;
    private variable strMessage;
    private variable strPmsID;
    private timer hdlDelay;
    private timer hdlWaitForFinish;
    private variable strArrTemperatureNames[];
    private variable fltArrTemperature[];
    private variable strTrace;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_ReadActualTemperature:  Start Submethod <<<<<<<<<<"));
    if( 0 == hdlWaitForFinish.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        fltElapsedTime = hdlWaitForFinish.GetElapsedTime();
        if (fltElapsedTime >= i_intTimeForProtocoll)
        {
          break;
        }
        blnReturn = Inheco_ODTC::Standard::ReadActualTemperature(i_IntDeviceNumber, Translate(""), strTime, fltArrTemperature, strArrTemperatureNames, intReturnValue, strMessage);
        TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
        TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, "fltArrTemperature", "strArrTemperatureNames", fltArrTemperature, strArrTemperatureNames);
        strTrace = StrConcat8("strTime = ", strTime, ", intReturnValue = ", intReturnValue, ", strMessage = ", strMessage, "", "");
        if (intReturnValue == 12)
        {
          Trace ("***** ReadActualTemperature failed But Error 2005 or error 2006 warning will be ignored Device will continue operation, intReturnValue = ", intReturnValue);
          Trace ("***** Message = ", strMessage);
          blnReturn = ASWGLOBAL::BOOL::TRUE;
        }
        _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ReadActualTemperature", intReturnValue, strTrace);
        if( 0 == hdlDelay.SetTimer(5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == hdlDelay.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    blnReturn = Inheco_ODTC::Standard::GetStatus(i_IntDeviceNumber, strDeviceID, strState, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    strTrace = StrConcat12("strDeviceID = ", strDeviceID, ", strState = ", strState, ", blnLocked = ", blnLocked, ", strPMSID = ", strPmsID, ", strCurrentDeviceTime = ", strCurrentTime, ", intReturnValue = ", intReturnValue);
    strTrace = StrConcat4(strTrace, ", strMessage = ", strMessage, "");
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strTrace);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_ReadActualTemperature:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_ExecuteProtocol( variable i_IntDeviceNumber, variable i_strProtocollFullFileName, variable i_strNameOfProtocollOnDevice, variable & o_intTimeForProtocol, variable & o_intRequestIDForActiveProtocol ) void {
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    private variable strTrace;
    o_intTimeForProtocol = 0;
    o_intRequestIDForActiveProtocol = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_ExecuteProtocol:  Start Submethod <<<<<<<<<<"));
    Trace ("------- ODTC device script to be perfomed: ", i_strProtocollFullFileName);
    blnReturn = Inheco_ODTC::Standard::DownloadProtocol(i_IntDeviceNumber, Translate(""), i_strProtocollFullFileName, intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::DownloadProtocol", intReturnValue, strMessage);
    blnReturn = Inheco_ODTC::Standard::ExecuteMethod(i_IntDeviceNumber, Translate(""), i_strNameOfProtocollOnDevice, 10000, o_intTimeForProtocol, o_intRequestIDForActiveProtocol, intReturnValue, strMessage);
    strTrace = StrConcat8("o_intTimeForProtocol= ", o_intTimeForProtocol, ", o_intRequestIDForActiveProtocol = ", o_intRequestIDForActiveProtocol, ", intReturnValue = ", intReturnValue, ", strMessage = ", strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ExecuteProtocol", intReturnValue, strTrace);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_ExecuteProtocol:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HandOverSimulationModeForAllLocalSMTs( variable i_blnSimulationON ) void {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: HandOverSimulationModeForAllLocalSMTs <<<<<<<<<<"));
    _blnSimulationModeON = i_blnSimulationON;
    Trace ("Simulation mode for NGSStarPrep SMT:  ", _blnSimulationModeON);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: HandOverSimulationModeForAllLocalSMTs <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_ReadSamplePlateFile( variable & var_SourceFile, variable & var_NumberOfSamples, variable & var_IndexesUsed, variable & arr_Index1SeqPositions[], variable & arr_Index2SeqPositions[], variable & arr_ALPseqPositions[], variable i_strTempSamplePlateFileName ) void {
    private variable Index2_ID;
    private variable strFileName;
    private variable Index1_ID;
    private variable Index2_Position;
    private variable Column1data;
    private variable i_strTempSamplePlateFileName2;
    private variable Column2data;
    private variable Column3data;
    private variable WellID_Row;
    private variable Column4data;
    private variable Column5_Row;
    private variable WellID;
    private variable Column3_Index1;
    private variable LoopCounter1;
    private variable loopCounter1;
    private variable Column6_Column;
    private variable Column6_Column_string;
    private variable WellID_Column;
    private variable TheSQLStatement;
    private variable Index1_Position;
    private variable Column1_Well;
    private variable Column2_ID;
    private variable strDirectoryName;
    private variable Column4_Index2;
    private file file1;
    private file file2;
    private file file3;
    var_NumberOfSamples = 0;
    var_IndexesUsed = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_ReadSamplePlateFile <<<<<<<<<<"));
    strDirectoryName = HSLExtensions::File::GetDirectoryName(i_strTempSamplePlateFileName);
    strFileName = HSLExtensions::File::GetFileNameWithoutExtension(i_strTempSamplePlateFileName);
    i_strTempSamplePlateFileName2 = StrConcat4(strDirectoryName, Translate("\\"), strFileName, Translate("2.xls"));
    Trace ("Temp Sample Plate File Name 1:  ", i_strTempSamplePlateFileName);
    Trace ("Temp Sample Plate File Name 2:  ", i_strTempSamplePlateFileName2);
    onerror goto errLabel_4 ;
    err.Clear();
    HSLExtensions::File::Delete(i_strTempSamplePlateFileName);
    HSLExtensions::File::Delete(i_strTempSamplePlateFileName2);
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("Write the original data to an xls file and find the number of indexes used."));
    file1.AddField(1, Column1data, hslString, 255);
    file1.AddField(2, Column2data, hslString, 255);
    file1.AddField(3, Column3data, hslString, 255);
    file1.AddField(4, Column4data, hslString, 255);
    file1.SetDelimiter(hslTabDelimited);
    if( 0 == file1.Open(var_SourceFile, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_SourceFile, "HxMetEdCompCmd");
    }
    file2.AddField("Well", Column1data, hslString, 255);
    file2.AddField("SampleID", Column2data, hslString, 255);
    file2.AddField("Index1", Column3data, hslString, 255);
    file2.AddField("Index2", Column4data, hslString, 255);
    if( 0 == file2.Open(i_strTempSamplePlateFileName + " " + "Sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSamplePlateFileName, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == file2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (Column1data == "IndexReads")
        {
          MECC::TraceComment(Translate("Found the number of indexes"));
          var_IndexesUsed = Column2data;
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    TheSQLStatement = StrConcat4(Translate("SELECT * FROM ["), Translate("Sheet1$"), Translate("] WHERE [SampleID] IS NOT NULL"), Translate(""));
    file2.SetExtendedProperties( "IMEX=1");
    file2.AddField("Well", Column1_Well, hslString, 255);
    file2.AddField("SampleID", Column2_ID, hslString, 255);
    file2.AddField("Index1", Column3_Index1, hslString, 255);
    file2.AddField("Index2", Column4_Index2, hslString, 255);
    if( 0 == file2.Open(i_strTempSamplePlateFileName + " " + "Sheet1$", hslRead, TheSQLStatement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSamplePlateFileName, "HxMetEdCompCmd");
    }
    file2.Seek(5, hslCurrent);
    file3.AddField("Well", Column1_Well, hslString, 255);
    file3.AddField("SampleID", Column2_ID, hslString, 255);
    file3.AddField("Index1", Column3_Index1, hslString, 255);
    file3.AddField("Index2", Column4_Index2, hslString, 255);
    file3.AddField("Row", Column5_Row, hslString, 255);
    file3.AddField("Column", Column6_Column, hslInteger);
    if( 0 == file3.Open(i_strTempSamplePlateFileName2 + " " + "Sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSamplePlateFileName2, "HxMetEdCompCmd");
    }
    {
      LoopCounter1 = 0;
      while (
         (file2.Eof() == 0)
      )
      {
        LoopCounter1 = LoopCounter1 + 1;
        if( 0 == file2.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Column5_Row = StrLeft(Column1_Well, 1);
        Column6_Column_string = StrRight(Column1_Well, 2);
        Column6_Column = StrIVal(Column6_Column_string);
        if( 0 == file3.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    if( 0 != file3.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file3.RemoveFields();
    file3.AddField("Well", WellID, hslString, 255);
    file3.AddField("SampleID", Column2_ID, hslString, 255);
    file3.AddField("Index1", Index1_ID, hslString, 255);
    file3.AddField("Index2", Index2_ID, hslString, 255);
    file3.AddField("Row", WellID_Row, hslString, 255);
    file3.AddField("Column", WellID_Column, hslInteger);
    if( 0 == file3.Open(i_strTempSamplePlateFileName2 + " " + "Sheet1$", hslRead, "SELECT * FROM [Sheet1$] ORDER BY [Column] ASC, [Row] ASC") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSamplePlateFileName2, "HxMetEdCompCmd");
    }
    arr_Index1SeqPositions.SetSize(0);
    arr_Index2SeqPositions.SetSize(0);
    arr_ALPseqPositions.SetSize(0);
    var_IndexesUsed = StrIVal(var_IndexesUsed);
    {
      var_NumberOfSamples = 0;
      while (
         (file3.Eof() == 0)
      )
      {
        var_NumberOfSamples = var_NumberOfSamples + 1;
        if( 0 == file3.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WellID = StrConcat2(WellID_Row, WellID_Column);
        arr_ALPseqPositions.AddAsLast(WellID);
        if (var_IndexesUsed >= 1)
        {
          Index1_Position = StrRight(Index1_ID, 2);
          Index1_Position = StrTrimLeft(Index1_Position, Translate("0"));
          arr_Index1SeqPositions.AddAsLast(Index1_Position);
        }
        if (var_IndexesUsed >= 2)
        {
          Index2_Position = StrRight(Index2_ID, 2);
          Index2_Position = StrTrimLeft(Index2_Position, Translate("0"));
          arr_Index2SeqPositions.AddAsLast(Index2_Position);
        }
        Trace ("Well:  ", WellID, " ----- Index1 ID:  ", Index1_ID, " ----- Index2 ID:  ", Index2_ID);
      }
    }
    if( 0 != file3.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file3.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: DATA_ReadSamplePlateFile <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_ReadSampleSheet( variable & var_SourceFile, variable & var_NumberOfSamples, variable & var_IndexesUsed, variable & arr_Index1SeqPositions[], variable & arr_Index2SeqPositions[], variable & arr_ALPseqPositions[], variable i_strTempSampleSheetFileName ) void {
    private variable Index2_ID;
    private variable result_StringFound;
    private variable Index2_Position;
    private variable Index1_ID;
    private variable result_Replacement;
    private variable Column1data;
    private variable strDirectoryOfTempSampleSheetFileName;
    private variable WellID_Row;
    private variable Line_WellDataHeader;
    private variable WellID;
    private variable LoopCounter1;
    private variable Return_Found0;
    private variable WellID_Column;
    private variable Index1_Position;
    private variable strFullpathSchemaIniFile;
    private file file1;
    private file file2;
    var_NumberOfSamples = 0;
    var_IndexesUsed = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_ReadSampleSheet <<<<<<<<<<"));
    Trace ("Temp Sample Sheet File Name 1:  ", i_strTempSampleSheetFileName);
    file1.AddField("F1", Column1data, hslString, 255);
    file1.SetDelimiter(hslTabDelimited);
    if( 0 == file1.Open(var_SourceFile, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_SourceFile, "HxMetEdCompCmd");
    }
    file2.AddField(1, Column1data, hslString, 255);
    file2.SetDelimiter(hslCSVDelimited);
    if( 0 == file2.Open(i_strTempSampleSheetFileName, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSampleSheetFileName, "HxMetEdCompCmd");
    }
    file1.Seek(1, hslCurrent);
    MECC::TraceComment(Translate("Read and trace out the data from the Sample Sheet:"));
    {
      LoopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        LoopCounter1 = LoopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Trace (Column1data);
        result_StringFound = StrFind(Column1data, Translate("Sample_Well"));
        if (result_StringFound != -1)
        {
          MECC::TraceComment(Translate("Found the line with the headers for the well data...."));
          Line_WellDataHeader = LoopCounter1;
          MECC::TraceComment(Translate("Header row found.  Determine how many, if any, indexes will be used in this run."));
          result_Replacement = StrReplace(Column1data, Translate("Index_ID"), Translate(""));
          Trace ("***** (Found ", result_Replacement, " Index ID(s).)");
          var_IndexesUsed = result_Replacement;
        }
        if (Line_WellDataHeader > 0)
        {
          if( 0 == file2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    RemoveTextDelimitersFromAsciiTextFile(i_strTempSampleSheetFileName);
    strDirectoryOfTempSampleSheetFileName = HSLExtensions::File::GetDirectoryName(i_strTempSampleSheetFileName);
    strFullpathSchemaIniFile = StrConcat2(i_strTempSampleSheetFileName, Translate("\\schema.ini"));
    HSLExtensions::File::Delete(strFullpathSchemaIniFile);
    MECC::TraceComment(Translate("Reread the file to get the number of samples and any index data."));
    if (var_IndexesUsed == 0)
    {
      MECC::TraceComment(Translate("***** No \"Index_ID\" found.  Adapter Indexes will not be used in this run."));
      file2.AddField("Sample_Well", WellID, hslString, 255);
      file2.SetDelimiter(hslCSVDelimited);
      if( 0 == file2.Open(i_strTempSampleSheetFileName, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSampleSheetFileName, "HxMetEdCompCmd");
      }
    }
    if (var_IndexesUsed == 1)
    {
      MECC::TraceComment(Translate("***** One Index Found *****"));
      file2.AddField("Sample_Well", WellID, hslString, 255);
      file2.AddField("I7_", Index1_ID, hslString, 255);
      file2.SetDelimiter(hslCSVDelimited);
      if( 0 == file2.Open(i_strTempSampleSheetFileName, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSampleSheetFileName, "HxMetEdCompCmd");
      }
    }
    if (var_IndexesUsed == 2)
    {
      MECC::TraceComment(Translate("***** Two Indexes Found *****"));
      file2.AddField("Sample_Well", WellID, hslString, 255);
      file2.AddField("I7_", Index1_ID, hslString, 255);
      file2.AddField("I5_", Index2_ID, hslString, 255);
      file2.SetDelimiter(hslCSVDelimited);
      if( 0 == file2.Open(i_strTempSampleSheetFileName, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSampleSheetFileName, "HxMetEdCompCmd");
      }
    }
    arr_Index1SeqPositions.SetSize(0);
    arr_Index2SeqPositions.SetSize(0);
    arr_ALPseqPositions.SetSize(0);
    {
      var_NumberOfSamples = 0;
      while (
         (file2.Eof() == 0)
      )
      {
        var_NumberOfSamples = var_NumberOfSamples + 1;
        if( 0 == file2.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Return_Found0 = StrFind(WellID, Translate("0"));
        if (Return_Found0 != -1)
        {
          WellID_Row = StrLeft(WellID, 1);
          WellID_Column = StrRight(WellID, 2);
          WellID_Column = StrIVal(WellID_Column);
          WellID = StrConcat2(WellID_Row, WellID_Column);
        }
        arr_ALPseqPositions.AddAsLast(WellID);
        if (var_IndexesUsed >= 1)
        {
          Index1_Position = StrRight(Index1_ID, 2);
          Index1_Position = StrTrimLeft(Index1_Position, Translate("0"));
          arr_Index1SeqPositions.AddAsLast(Index1_Position);
        }
        if (var_IndexesUsed >= 2)
        {
          Index2_Position = StrRight(Index2_ID, 2);
          Index2_Position = StrTrimLeft(Index2_Position, Translate("0"));
          arr_Index2SeqPositions.AddAsLast(Index2_Position);
        }
        Trace ("Well:  ", WellID, "  Index1 Position in carrier:  ", Index1_Position, "  Index2 Position in carrier:  ", Index2_Position);
      }
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_ReadSampleSheet <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }
} // library namespace
