#pragma once
#include "HSLMthLib.hsl"
#include "Training\\medimmune\\medimmune\\b cell protocols\\HSLTrcLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLDeckVisualize.hsl"
#include "HSLStrLib.hsl"
#include "HSLML_STARLib.hsl"
#include "lookup.hs_"
#include "HSLFilLib.hsl"
#include "Visual_NTR_library\\Visual_NTR_library for Ham GB NTR libraries.hs_"
#include "Training\\medimmune\\ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "NTR_Handling\\NTR384_to_waste_VENUS_GB4.hs_"
#include "HSLMETEDLib.hs_"
#include "Training\\medimmune\\medimmune\\b cell protocols\\HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NTR384DIRECTUSE {
  private function _Version_Info(  ) void ;
  function discard_empty_racks( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, sequence & tiprack_waste_sequence, variable CORE_after ) void ;
  function discard_empty_racks_96format( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, sequence & tiprack_waste_sequence, variable CORE_after ) void ;
  private function get_tip_counter( variable i_counter_name, variable & o_counter_value ) void ;
  function gettips_384head( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, sequence & tiprack_waste_sequence, variable tipcounter_name, variable CORE_after, variable seq_inc_flag ) void ;
  function gettips_384head_96format( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, sequence & tiprack_waste_sequence, variable tipcounter_name, variable CORE_after, variable seq_inc_flag ) void ;
  private function load( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, sequence & temp_storage_sequence, variable description_of_position, variable tip_needed, variable tip_volume, variable head96_or_channels, variable tipcounter_name ) void ;
  function load_GUI( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, variable description_of_position, variable tip_needed, variable tipcounter_name ) void ;
  function load_GUI_96format( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, variable description_of_position, variable tip_needed, variable tipcounter_name ) void ;
  private function update_tip_counter( variable i_counter_name, variable i_counter_value ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOOKUP::_InitLibrary();
    VISUAL_NTR_LIBRARY_FOR_HAM_GB_NTR_LIBRARIES::_InitLibrary();
    NTR384_TO_WASTE_VENUS_GB4::_InitLibrary();
  }
  function _ExitLibrary() {
    LOOKUP::_ExitLibrary();
    VISUAL_NTR_LIBRARY_FOR_HAM_GB_NTR_LIBRARIES::_ExitLibrary();
    NTR384_TO_WASTE_VENUS_GB4::_ExitLibrary();
  }

  private function load( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, sequence & temp_storage_sequence, variable description_of_position, variable tip_needed, variable tip_volume, variable head96_or_channels, variable tipcounter_name ) void {
    private dialog dialogHandle_1;
    private dialog dialogHandle_2;
    private dialog dialogHandle_3;
    private dialog dialogHandle_4;
    private variable max_rack_start;
    private variable total_racks;
    private variable tips_in_first_rack_max;
    private variable first_available_rack;
    private variable tiprack_end;
    private variable needed_racks;
    private variable first_available_tip;
    private variable tip_start;
    private variable needed_tips_last_rack;
    private variable tiprack_start;
    private variable tip_size;
    private dialog dialogHandle_5;
    private dialog dialogHandle_6;
    private variable counter_first_tip;
    private variable temp;
    private variable counter_first_rack;
    private variable counter_tip_start;
    private dialog dialogHandle_7;
    private dialog dialogHandle_8;
    private dialog dialogHandle_9;
    private dialog dialogHandle_10;
    DeckVisualize::UpdateUsedPositions(ML_STAR, tip_sequence, 6, Translate(""));
    tiprack_start = tiprack_sequence.GetCurrentPosition();
    tiprack_end = tiprack_sequence.GetCount();
    total_racks = tiprack_end - tiprack_start;
    total_racks = total_racks / 384.0;
    total_racks = MthCeiling(total_racks);
    if(0){
      TrcTrace(Translate("----------------in load, total racks = "), total_racks);
    }
    if (tip_volume == 10)
    {
      tip_size = 2;
    }
    else
    {
      if (tip_volume == 50)
      {
        tip_size = 22;
      }
      else
      {
        if (tip_volume == 300)
        {
          tip_size = 0;
        }
        else
        {
          dialogHandle_2.SetOutput(Translate("Tip volume in load step for NTR tips must be 10, 50 or 300."));
          dialogHandle_2.ShowOutput(Translate("Programming Error"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          abort;
        }
      }
    }
    needed_racks = tip_needed / 96.0;
    needed_racks = MthCeiling(needed_racks);
    if (needed_racks == 0)
    {
      needed_racks = 1;
    }
    needed_tips_last_rack = tip_needed % 96;
    if (needed_tips_last_rack == 0)
    {
      needed_tips_last_rack = 96;
    }
    if(0){
      TrcTrace4(Translate("------------- needed racks = "), needed_racks, Translate(" and number of tips needed in final rack = "), needed_tips_last_rack);
    }
    if (needed_racks > total_racks)
    {
      dialogHandle_3.SetOutput(Translate("This method will need extra tips during the run.  A dialogue box will come up when reloading is required."));
      dialogHandle_3.ShowOutput(Translate("Warning - tips must be loaded during the method"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
    }
    max_rack_start = total_racks - needed_racks;
    max_rack_start = max_rack_start + 1;
    if (max_rack_start > total_racks)
    {
      max_rack_start = total_racks;
    }
    tips_in_first_rack_max = 96 - needed_tips_last_rack;
    tips_in_first_rack_max = tips_in_first_rack_max + 1;
    if (head96_or_channels == 2)
    {
      dialogHandle_1.SetOutput(Translate("Please remove any empty tip racks in the stacks "), description_of_position, Translate("."));
      dialogHandle_1.ShowOutput(Translate("Remove Empty Racks"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    else
    {
      dialogHandle_4.SetOutput(Translate("Please remove any empty or incomplete tip racks in the stacks "), description_of_position, Translate("."));
      dialogHandle_4.ShowOutput(Translate("Remove Empty and Incomplete Racks"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (head96_or_channels == 2)
    {
      dialogHandle_7.SetOutput(Translate("In the next dialogue box, please enter the number of the first available "), tip_volume, Translate("µl tip rack in the stacks "), description_of_position, Translate(".\n\nRacks are counted from back left to front right with the top layer counter first, then the second layer etc."), Translate("\n\nYou will also need to enter the number of the first tip in that rack."));
      dialogHandle_7.ShowOutput(Translate("Tip Start Point Instructions"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      if (total_racks == 4)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, tip_sequence, 5, Translate(""));
        DeckVisualize::UpdateUsedPositions(ML_STAR, temp_storage_sequence, 6, Translate(""));
        dialogHandle_10.SetOutput(Translate("Please make sure that there are no tips in the flashing positions.  These positions may be used to store tips while a rack is discarded."));
        dialogHandle_10.ShowOutput(Translate("Clear Tip Storage Positions"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, temp_storage_sequence, 5, Translate(""));
        DeckVisualize::UpdateUsedPositions(ML_STAR, tip_sequence, 6, Translate(""));
      }
    }
    else
    {
      dialogHandle_9.SetOutput(Translate("In the next dialogue box, please enter the number of the first available "), tip_volume, Translate("µl tip rack in the stacks "), description_of_position, Translate(".\n\nRacks are counted from back left to front right with the top layer counter first, then the second layer etc."));
      dialogHandle_9.ShowOutput(Translate("Tip Start Point Instructions"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    get_tip_counter(tipcounter_name, counter_tip_start);
    TrcTrace(Translate("counter tip start is "), counter_tip_start);
    if (counter_tip_start == 0)
    {
      counter_tip_start = 1;
    }
    TrcTrace(Translate("counter tip start is "), counter_tip_start);
    counter_first_rack = counter_tip_start / 96.0;
    if(0){
      TrcTrace(Translate("Counter first rack before ceiling is "), counter_first_rack);
    }
    counter_first_rack = MthCeiling(counter_first_rack);
    if(0){
      TrcTrace(Translate("Counter first rack after ceiling is "), counter_first_rack);
    }
    temp = counter_first_rack * 96;
    temp = temp - 96;
    counter_first_tip = counter_tip_start - temp;
    if (head96_or_channels == 1)
    {
      if (counter_first_tip != 1)
      {
        counter_first_tip = 1;
        counter_first_rack = counter_first_rack + 1;
      }
    }
    if(0){
      TrcTrace(Translate("counter first tip at end of calculations is "), counter_first_tip);
    }
    if (needed_racks > total_racks)
    {
      max_rack_start = total_racks;
    }
    if (counter_first_rack > max_rack_start)
    {
      counter_first_rack = 1;
    }
    if(0){
      TrcTrace4(Translate("Counter first rack is "), counter_first_rack, Translate(" and max rack start is "), max_rack_start);
    }
    dialogHandle_5.SetInputSize(1);
    dialogHandle_5.SetInputField(0, Translate("Number of first available rack"), hslInteger, counter_first_rack, 1, max_rack_start);
    dialogHandle_5.ShowInput(Translate("Number of the first available tip rack"), hslInfinite, hslOKOnly | hslDefButton1);
    first_available_rack = dialogHandle_5.GetInputField(0);
    if (first_available_rack < max_rack_start)
    {
      tips_in_first_rack_max = 96;
    }
    if (needed_racks > total_racks)
    {
      tips_in_first_rack_max = 96;
    }
    if (counter_first_tip > tips_in_first_rack_max)
    {
      counter_first_tip = 1;
    }
    if(0){
      TrcTrace(Translate("Max for first tip in racks is "), tips_in_first_rack_max);
      TrcTrace(Translate("counter first tip is "), counter_first_tip);
    }
    if (head96_or_channels == 2)
    {
      dialogHandle_6.SetInputSize(1);
      dialogHandle_6.SetInputField(0, Translate("number of first tip in that rack"), hslInteger, counter_first_tip, 1, tips_in_first_rack_max);
      dialogHandle_6.ShowInput(Translate("Number of the first tip in the first rack"), hslInfinite, hslOKOnly | hslDefButton1);
      first_available_tip = dialogHandle_6.GetInputField(0);
    }
    else
    {
      first_available_tip = 1;
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, tip_sequence, 5, Translate(""));
    if (tip_volume == 300)
    {
      dialogHandle_8.SetOutput(Translate("Check tips are 300µl as using 50µl tips will cause SERIOUS damage."));
      dialogHandle_8.ShowOutput(Translate("Check tip size"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
    }
    tip_start = first_available_rack * 96;
    tip_start = tip_start + first_available_tip;
    tip_start = tip_start - 96;
    tip_sequence.SetCurrentPosition(tip_start);
    tiprack_start = first_available_rack * 96;
    tiprack_start = tiprack_start - 95;
    tiprack_sequence.SetCurrentPosition(tiprack_start);
    counter_tip_start = tip_sequence.GetCurrentPosition();
    update_tip_counter(tipcounter_name, counter_tip_start);
  }

  function discard_empty_racks( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, sequence & tiprack_waste_sequence, variable CORE_after ) void {
    private variable tiprack_current_pos;
    private variable start_current_rack;
    private variable tip_current_pos;
    private variable eject;
    private variable loopCounter1;
    private variable racks_to_remove;
    private variable traceLevel;
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::discard_empty_racks\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    traceLevel = TRACELEVEL::GetTraceLevel();
    tip_current_pos = tip_sequence.GetCurrentPosition();
    if (tip_current_pos == 0)
    {
      tip_current_pos = tip_sequence.GetCount();
      tip_current_pos = tip_current_pos + 1;
    }
    tiprack_current_pos = tiprack_sequence.GetCurrentPosition();
    start_current_rack = tip_current_pos / 384.0;
    start_current_rack = MthCeiling(start_current_rack);
    start_current_rack = start_current_rack * 384;
    start_current_rack = start_current_rack - 383;
    racks_to_remove = start_current_rack - tiprack_current_pos;
    racks_to_remove = racks_to_remove / 384;
    if (traceLevel == 2)
    {
      MECC::TraceComment(Translate("---------------------IN DISCARD EMPTY RACKS"));
      TrcTrace4(Translate("start pos of current rack ="), start_current_rack, Translate(", tip rack seq current pos = "), tiprack_current_pos);
      TrcTrace4(Translate("racks to remove = "), racks_to_remove, Translate(""), Translate(""));
    }
    {
      for(loopCounter1 = 0; loopCounter1 < racks_to_remove;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == racks_to_remove)
        {
          eject = CORE_after;
        }
        else
        {
          eject = 0;
        }
        NTR384_TO_WASTE_VENUS_GB4::NTR384_to_waste_core_VENUS(ML_STAR, tiprack_sequence, tiprack_waste_sequence, eject, 1);
        SeqIncrement(tiprack_sequence, 384);
      }
    }
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::discard_empty_racks END\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }

  private function get_tip_counter( variable i_counter_name, variable & o_counter_value ) void {
    private variable lookup_return;
    private variable tipcounter;
    private variable loopCounter1;
    private variable value;
    private file tipcounterfile;
    private variable array_counter_value[];
    private variable array_counter_name[];
    private variable loop_number;
    private variable loopCounter2;
    private variable filepath;
    private dialog dialogHandle_11;
    private dialog dialogHandle_12;
    o_counter_value = 0;
    filepath = FilGetLibraryPath();
    filepath = StrConcat2(filepath, Translate("\\NTRTipCounter.xls"));
    onerror goto errLabel_13 ;
    err.Clear();
    tipcounterfile.AddField("TipCounter", tipcounter, hslString, 255);
    tipcounterfile.AddField("Value", value, hslInteger);
    if( 0 == tipcounterfile.Open(filepath + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, filepath, "HxMetEdCompCmd");
    }
    errLabel_13 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      dialogHandle_12.SetOutput(Translate("Unable to open tip counter file at "), filepath, Translate("\n\nPlease check that the file is not open and, if the file is not there, create a copy of NTRTipCounterbackup.xls and rename it to NTRTipCounter.xls"));
      dialogHandle_12.ShowOutput(Translate("Tip Counter File Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      onerror goto errLabel_14 ;
      err.Clear();
      tipcounterfile.AddField("TipCounter", tipcounter, hslString, 255);
      tipcounterfile.AddField("Value", value, hslInteger);
      if( 0 == tipcounterfile.Open(filepath + " " + "Sheet1$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, filepath, "HxMetEdCompCmd");
      }
      errLabel_14 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_11.SetOutput(Translate("Still unable to open tip counter file at "), filepath, Translate("\n\nMethod will Abort"));
        dialogHandle_11.ShowOutput(Translate("Tip Counter File Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
    }   /* end if from skip handler if no error */
    array_counter_name.SetSize(0);
    array_counter_value.SetSize(0);
    {
      loopCounter1 = 0;
      while (
         (tipcounterfile.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == tipcounterfile.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        array_counter_name.AddAsLast(tipcounter);
        array_counter_value.AddAsLast(value);
      }
    }
    if( 0 != tipcounterfile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    tipcounterfile.RemoveFields();
    lookup_return = LOOKUP::Lookup(array_counter_name, i_counter_name);
    if (lookup_return == 0)
    {
      array_counter_name.AddAsLast(i_counter_name);
      array_counter_value.AddAsLast(1);
      o_counter_value = 1;
    }
    else
    {
      o_counter_value=array_counter_value.GetAt(lookup_return-1);
    }
    HSLML_STAR::DeleteBarcodeFile(filepath);
    tipcounterfile.AddField("TipCounter", tipcounter, hslString, 255);
    tipcounterfile.AddField("Value", value, hslInteger);
    if( 0 == tipcounterfile.Open(filepath + " " + "Sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, filepath, "HxMetEdCompCmd");
    }
    loop_number=array_counter_name.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < loop_number;)
      {
        loopCounter2 = loopCounter2 + 1;
        tipcounter=array_counter_name.GetAt(loopCounter2-1);
        value=array_counter_value.GetAt(loopCounter2-1);
        if( 0 == tipcounterfile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != tipcounterfile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    tipcounterfile.RemoveFields();
  }

  private function update_tip_counter( variable i_counter_name, variable i_counter_value ) void {
    private variable tipcounter;
    private variable loopCounter1;
    private variable value;
    private file tipcounterfile;
    private variable array_counter_value[];
    private variable array_counter_name[];
    private variable lookup_return;
    private variable loop_number;
    private variable loopCounter2;
    private variable filepath;
    private dialog dialogHandle_15;
    private dialog dialogHandle_16;
    filepath = FilGetLibraryPath();
    filepath = StrConcat2(filepath, Translate("\\NTRTipCounter.xls"));
    onerror goto errLabel_17 ;
    err.Clear();
    tipcounterfile.AddField("TipCounter", tipcounter, hslString, 255);
    tipcounterfile.AddField("Value", value, hslInteger);
    if( 0 == tipcounterfile.Open(filepath + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, filepath, "HxMetEdCompCmd");
    }
    errLabel_17 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      dialogHandle_16.SetOutput(Translate("Unable to open tip counter file at "), filepath, Translate("\n\nPlease check that the file is not open and, if the file is not there, create a copy of NTRTipCounterbackup.xls and rename it to NTRTipCounter.xls"));
      dialogHandle_16.ShowOutput(Translate("Tip Counter File Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      onerror goto errLabel_18 ;
      err.Clear();
      tipcounterfile.AddField("TipCounter", tipcounter, hslString, 255);
      tipcounterfile.AddField("Value", value, hslInteger);
      if( 0 == tipcounterfile.Open(filepath + " " + "Sheet1$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, filepath, "HxMetEdCompCmd");
      }
      errLabel_18 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_15.SetOutput(Translate("Still unable to open tip counter file at "), filepath, Translate("\n\nMethod will Abort"));
        dialogHandle_15.ShowOutput(Translate("Tip Counter File Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
    }   /* end if from skip handler if no error */
    array_counter_name.SetSize(0);
    array_counter_value.SetSize(0);
    {
      loopCounter1 = 0;
      while (
         (tipcounterfile.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == tipcounterfile.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        array_counter_name.AddAsLast(tipcounter);
        array_counter_value.AddAsLast(value);
      }
    }
    if( 0 != tipcounterfile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    tipcounterfile.RemoveFields();
    lookup_return = LOOKUP::Lookup(array_counter_name, i_counter_name);
    if (lookup_return == 0)
    {
      array_counter_name.AddAsLast(i_counter_name);
      array_counter_value.AddAsLast(i_counter_value);
    }
    else
    {
      array_counter_value.SetAt(lookup_return-1, i_counter_value);
    }
    HSLML_STAR::DeleteBarcodeFile(filepath);
    tipcounterfile.AddField("TipCounter", tipcounter, hslString, 255);
    tipcounterfile.AddField("Value", value, hslInteger);
    if( 0 == tipcounterfile.Open(filepath + " " + "Sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, filepath, "HxMetEdCompCmd");
    }
    loop_number=array_counter_name.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < loop_number;)
      {
        loopCounter2 = loopCounter2 + 1;
        tipcounter=array_counter_name.GetAt(loopCounter2-1);
        value=array_counter_value.GetAt(loopCounter2-1);
        if( 0 == tipcounterfile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != tipcounterfile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    tipcounterfile.RemoveFields();
  }

  function gettips_384head( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, sequence & tiprack_waste_sequence, variable tipcounter_name, variable CORE_after, variable seq_inc_flag ) void {
    private dialog dialogHandle_19;
    private dialog dialogHandle_20;
    private variable number_racks_total;
    private variable seq_end;
    private variable available;
    private variable temp;
    private variable tiprack_current_pos;
    private variable tip_current_pos;
    private variable first_covered_tip;
    private variable counter_tip_start;
    private variable number_racks_layer;
    private variable tips_needed;
    private variable traceLevel;
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::gettips_384head\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    traceLevel = TRACELEVEL::GetTraceLevel();
    tips_needed = 384;
    seq_end = tip_sequence.GetCount();
    number_racks_total = seq_end / 384;
    number_racks_layer = number_racks_total / 4;
    tip_current_pos = tip_sequence.GetCurrentPosition();
    tiprack_current_pos = tiprack_sequence.GetCurrentPosition();
    if (traceLevel == 2)
    {
      TrcTrace4(Translate("---------------------------Tip start = "), tip_current_pos, Translate(" and tiprack start = "), tiprack_current_pos);
    }
    if (tip_current_pos == 0)
    {
      dialogHandle_20.SetOutput(Translate("Please reload the empty tip stack carrier."));
      dialogHandle_20.ShowOutput(Translate("Reload tip stack"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      tip_sequence.SetCurrentPosition(1);
      tip_current_pos = 1;
      tiprack_sequence.SetCurrentPosition(1);
    }
    temp = 384 * number_racks_layer;
    first_covered_tip = tiprack_current_pos + temp;
    if (first_covered_tip > seq_end)
    {
      first_covered_tip = seq_end + 1;
    }
    available = first_covered_tip - tip_current_pos;
    if (traceLevel == 2)
    {
      TrcTrace4(Translate("--------First covered tip = "), first_covered_tip, Translate(" and available tips = "), available);
    }
    if (tips_needed > available)
    {
      discard_empty_racks(ML_STAR, tip_sequence, tiprack_sequence, tiprack_waste_sequence, CORE_after);
      tip_current_pos = tip_sequence.GetCurrentPosition();
      tiprack_current_pos = tiprack_sequence.GetCurrentPosition();
      temp = 384 * number_racks_layer;
      first_covered_tip = tiprack_current_pos + temp;
      if (first_covered_tip > seq_end)
      {
        first_covered_tip = seq_end + 1;
      }
      available = first_covered_tip - tip_current_pos;
      if (tips_needed > available)
      {
        dialogHandle_19.SetOutput(Translate("Please reload the empty tip stack carrier."));
        dialogHandle_19.ShowOutput(Translate("Reload tip stack"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        tip_sequence.SetCurrentPosition(1);
        tip_current_pos = 1;
        tiprack_sequence.SetCurrentPosition(1);
      }
    }
    ML_STAR._BAE15959_BFAF_451b_AEBC_25AE7E04EB82("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"); // Head384TipPickUp
    counter_tip_start = tip_sequence.GetCurrentPosition();
    update_tip_counter(tipcounter_name, counter_tip_start);
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::gettips_384head END\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }

  function load_GUI( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, variable description_of_position, variable tip_needed, variable tipcounter_name ) void {
    private dialog dialogHandle_21;
    private variable total_racks;
    private variable rack_message;
    private variable max_rack_start;
    private variable tips_in_first_rack_max;
    private variable counter_first_tip;
    private variable tiprack_end;
    private variable temp;
    private variable first_available_rack;
    private variable tip_message;
    private variable counter_first_rack;
    private variable needed_racks;
    private variable Front_end_tip_counter_value;
    private variable pipetting_tool;
    private variable loopCounter1;
    private variable total_tips;
    private variable break_loop_flag;
    private variable first_available_tip;
    private variable needed_tips_last_rack;
    private variable tip_start;
    private variable tiprack_start;
    private variable counter_tip_start;
    private variable tip_end;
    private variable not_enough_tips_return;
    private variable GUI_message;
    private variable total_tips_message;
    private dialog dialogHandle_22;
    private dialog dialogHandle_23;
    private dialog dialogHandle_24;
    private dialog dialogHandle_25;
    private variable traceLevel;
    private dialog customDialog_26;
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::LoadGUI\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    traceLevel = TRACELEVEL::GetTraceLevel();
    tiprack_start = tiprack_sequence.GetCurrentPosition();
    tiprack_end = tiprack_sequence.GetCount();
    total_racks = tiprack_end - tiprack_start;
    total_racks = total_racks / 384.0;
    total_racks = MthCeiling(total_racks);
    if (traceLevel == 2)
    {
      TrcTrace(Translate("----------------in load, total racks = "), total_racks);
    }
    needed_racks = tip_needed / 384.0;
    needed_racks = MthCeiling(needed_racks);
    if (needed_racks == 0)
    {
      needed_racks = 1;
    }
    needed_tips_last_rack = tip_needed % 384;
    if (needed_tips_last_rack == 0)
    {
      needed_tips_last_rack = 384;
    }
    if (traceLevel == 2)
    {
      TrcTrace4(Translate("------------- needed racks = "), needed_racks, Translate(" and number of tips needed in final rack = "), needed_tips_last_rack);
    }
    if (needed_racks > total_racks)
    {
      dialogHandle_21.SetOutput(Translate("This method will need extra tips during the run.  A dialogue box will come up when reloading is required."));
      dialogHandle_21.ShowOutput(Translate("Warning - tips must be loaded during the method"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
    }
    max_rack_start = total_racks - needed_racks;
    max_rack_start = max_rack_start + 1;
    if (max_rack_start > total_racks)
    {
      max_rack_start = total_racks;
    }
    tips_in_first_rack_max = 384 - needed_tips_last_rack;
    tips_in_first_rack_max = tips_in_first_rack_max + 1;
    if (traceLevel == 2)
    {
      TrcTrace4(Translate("------------- max_rack_start = "), max_rack_start, Translate(" tips_in_first_rack_max = "), tips_in_first_rack_max);
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, tip_sequence, 6, Translate(""));
    dialogHandle_23.SetOutput(Translate("Please remove any empty or incomplete tip racks in the stacks "), description_of_position, Translate("."));
    dialogHandle_23.ShowOutput(Translate("Remove Empty and Incomplete Racks"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, tip_sequence, 5, Translate(""));
    if (needed_racks > total_racks)
    {
    }
    else
    {
      if (tip_needed == 0)
      {
        tip_message = StrConcat8(Translate("Number of "), Translate("Hamilton 50"), Translate("ul tips required to complete the method was entered as 0"), Translate("\n\n\tTherefore the number of TIP RACKS required is unknown"), Translate("\n\n\tIf the method runs out of tips, the user will be prompted to reload all the stacks for this tip type"), Translate(""), Translate(""), Translate(""));
        dialogHandle_25.SetOutput(tip_message, Translate("\n\nThe Hamilton NTR Visual Editor will now lauch to enable you to select a suitable starting position in the NTR stacks."));
        dialogHandle_25.ShowOutput(Translate("NTR tip requirements"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      else
      {
        total_tips_message = StrConcat8(Translate("To complete the method you will need "), tip_needed, Translate(" tips ("), Translate("Hamilton 50"), Translate("ul)"), Translate(""), Translate(""), Translate(""));
        if (needed_racks == 1)
        {
          rack_message = StrConcat8(Translate("\n\n\tTherefore you will need a minumum of "), needed_racks, Translate(" TIP RACK on the deck"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          rack_message = StrConcat8(Translate("\n\n\tTherefore you will need a minumum of "), needed_racks, Translate(" TIP RACKS on the deck"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        dialogHandle_24.SetOutput(total_tips_message, rack_message, Translate("\n\nThe Hamilton NTR Visual Editor will now lauch to enable you to select a suitable starting position in the NTR stacks."));
        dialogHandle_24.ShowOutput(Translate("NTR tip requirements"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    get_tip_counter(tipcounter_name, counter_tip_start);
    if (traceLevel == 2)
    {
      TrcTrace(Translate("counter tip start is "), counter_tip_start);
    }
    if (counter_tip_start == 0)
    {
      counter_tip_start = 1;
    }
    if (traceLevel == 2)
    {
      TrcTrace(Translate("counter tip start is "), counter_tip_start);
    }
    counter_first_rack = counter_tip_start / 384.0;
    if (traceLevel == 2)
    {
      TrcTrace(Translate("Counter first rack before ceiling is "), counter_first_rack);
    }
    counter_first_rack = MthCeiling(counter_first_rack);
    if (traceLevel == 2)
    {
      TrcTrace(Translate("Counter first rack after ceiling is "), counter_first_rack);
    }
    temp = counter_first_rack * 384;
    temp = temp - 384;
    counter_first_tip = counter_tip_start - temp;
    if (counter_first_tip != 1)
    {
      counter_first_tip = 1;
      counter_first_rack = counter_first_rack + 1;
    }
    if (traceLevel == 2)
    {
      TrcTrace(Translate("counter first tip at end of calculations is "), counter_first_tip);
    }
    if (needed_racks > total_racks)
    {
      max_rack_start = total_racks;
    }
    if (counter_first_rack > max_rack_start)
    {
      counter_first_rack = 1;
    }
    if (traceLevel == 2)
    {
      TrcTrace4(Translate("Counter first rack is "), counter_first_rack, Translate(" and max rack start is "), max_rack_start);
    }
    first_available_rack = counter_first_rack;
    if (first_available_rack < max_rack_start)
    {
      tips_in_first_rack_max = 384;
    }
    if (needed_racks > total_racks)
    {
      tips_in_first_rack_max = 384;
    }
    if (counter_first_tip > tips_in_first_rack_max)
    {
      counter_first_tip = 1;
    }
    if (traceLevel == 2)
    {
      TrcTrace(Translate("Max for first tip in racks is "), tips_in_first_rack_max);
      TrcTrace(Translate("counter first tip is "), counter_first_tip);
    }
    first_available_tip = 1;
    tip_start = first_available_rack * 384;
    tip_start = tip_start + first_available_tip;
    tip_start = tip_start - 384;
    if (traceLevel == 2)
    {
      TrcTrace(Translate("tip_start = "), tip_start);
    }
    tip_sequence.SetCurrentPosition(tip_start);
    VISUAL_NTR_LIBRARY_FOR_HAM_GB_NTR_LIBRARIES::NTR_Tip_Counter_Read(tip_sequence, tipcounter_name);
    if (traceLevel == 2)
    {
      TrcTrace(Translate("READ GUI tip counte value = "), Front_end_tip_counter_value);
    }
    VISUAL_NTR_LIBRARY_FOR_HAM_GB_NTR_LIBRARIES::Tip_Counter_Write_Internal(tip_sequence, tipcounter_name);
    if (traceLevel == 2)
    {
      TrcTrace(Translate("WRITE Front_end_tip_counter_value = "), Front_end_tip_counter_value);
    }
    pipetting_tool = Translate("mph");
    DeckVisualize::UpdateUsedPositions(ML_STAR, tip_sequence, 5, Translate(""));
    customDialog_26.InitCustomDialog("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");
    customDialog_26.ShowCustomDialog();
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        pipetting_tool = Translate("mph");
        GUI_message = StrConcat4(Translate("Select stacked "), Translate("Hamilton 50"), Translate("ul racks"), Translate(""));
        VISUAL_NTR_LIBRARY_FOR_HAM_GB_NTR_LIBRARIES::NTR_Seq_Edit(ML_STAR, tip_sequence, 0, 0, pipetting_tool, tipcounter_name, GUI_message);
        tip_start = tip_sequence.GetCurrentPosition();
        tip_end = tip_sequence.GetCount();
        total_tips = tip_end - tip_start;
        total_tips = total_tips + 1;
        if (traceLevel == 2)
        {
          TrcTrace4(Translate("tip needed = "), tip_needed, Translate(", total_tips = "), total_tips);
        }
        if (tip_needed == 0)
        {
          break_loop_flag = 1;
        }
        else
        {
          if (tip_needed > total_tips)
          {
            dialogHandle_22.SetOutput(Translate("From the selected starting position, there are not enough tips to complete the method."), Translate("\n\n\tAbort = Abort method."), Translate("\n\n\tRetry = Reselect starting position."), Translate("\n\n\tIgnore = Continue and reload tips when prompted during the method."));
            not_enough_tips_return = dialogHandle_22.ShowOutput(Translate("Not enough tips to complete method"), hslAbortRetryIgnore | hslInformation | hslDefButton1, hslInfinite);
            if (not_enough_tips_return == 3)
            {
              abort;
            }
            if (not_enough_tips_return == 5)
            {
              break_loop_flag = 1;
            }
          }
          else
          {
            break_loop_flag = 1;
          }
        }
        if (break_loop_flag == 1)
        {
          break;
        }
      }
    }
    tip_start = tip_sequence.GetCurrentPosition();
    first_available_rack = tip_start / 384.0;
    first_available_rack = MthCeiling(first_available_rack);
    tiprack_start = first_available_rack * 384;
    tiprack_start = tiprack_start - 383;
    tiprack_sequence.SetCurrentPosition(tiprack_start);
    counter_tip_start = tip_sequence.GetCurrentPosition();
    update_tip_counter(tipcounter_name, counter_tip_start);
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::LoadGUI END\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }

  private function _Version_Info(  ) void {
    MECC::TraceComment(Translate("NTR 384 DirectUse Library\n\nVersion 1.0 March 2015\n\nFeatures\n\nLoad GUI - select tip seq starting position using Hamilton Visual NTR editor based on number of tips required for method.  \n\n\nUses new version (GB4) of NTR_to_waste_VENUS to discard racks.\n                              2 waste positions are created based on default waste location of x=1290, Y=350, Z=245.\n                              This enables 8 racks to be thrown away if starting with an empty waste bag.\n                               Rack throw out modified to work for 2,4, 8, 12 and 16 channels                                \n                               If number of channels =>8 then channel 8 used as front channel for empty rack throw out. \n                              This is because on 12 and 16 channels instrments, channel 8 has access to all the deck whereas channel 12 and 16 have limited access\n                              Rack throw out modified to work for 10. 50 and 300ul tips so throw out height is always the same\n                               \nTip counter added that gets the path of the library folder so works on Windows 7.  Tip counter written to a file.\n"));
  }

  function discard_empty_racks_96format( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, sequence & tiprack_waste_sequence, variable CORE_after ) void {
    private variable tiprack_current_pos;
    private variable start_current_rack;
    private variable traceLevel;
    private variable tip_current_pos;
    private variable eject;
    private variable loopCounter1;
    private variable racks_to_remove;
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::discard_empty_racks\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    traceLevel = TRACELEVEL::GetTraceLevel();
    tip_current_pos = tip_sequence.GetCurrentPosition();
    if (tip_current_pos == 0)
    {
      tip_current_pos = tip_sequence.GetCount();
      tip_current_pos = tip_current_pos + 1;
    }
    tiprack_current_pos = tiprack_sequence.GetCurrentPosition();
    start_current_rack = tip_current_pos / 96.0;
    start_current_rack = MthCeiling(start_current_rack);
    start_current_rack = start_current_rack * 96;
    start_current_rack = start_current_rack - 95;
    racks_to_remove = start_current_rack - tiprack_current_pos;
    racks_to_remove = racks_to_remove / 96;
    if (traceLevel == 2)
    {
      MECC::TraceComment(Translate("---------------------IN DISCARD EMPTY RACKS"));
      TrcTrace4(Translate("start pos of current rack ="), start_current_rack, Translate(", tip rack seq current pos = "), tiprack_current_pos);
      TrcTrace4(Translate("racks to remove = "), racks_to_remove, Translate(""), Translate(""));
    }
    {
      for(loopCounter1 = 0; loopCounter1 < racks_to_remove;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == racks_to_remove)
        {
          eject = CORE_after;
        }
        else
        {
          eject = 0;
        }
        NTR384_TO_WASTE_VENUS_GB4::NTR384_to_waste_core_VENUS(ML_STAR, tiprack_sequence, tiprack_waste_sequence, eject, 1);
        SeqIncrement(tiprack_sequence, 96);
      }
    }
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::discard_empty_racks END\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }

  function gettips_384head_96format( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, sequence & tiprack_waste_sequence, variable tipcounter_name, variable CORE_after, variable seq_inc_flag ) void {
    private dialog dialogHandle_27;
    private dialog dialogHandle_28;
    private variable number_racks_total;
    private variable seq_end;
    private variable available;
    private variable temp;
    private variable tiprack_current_pos;
    private variable traceLevel;
    private variable tip_current_pos;
    private variable tips_needed;
    private variable first_covered_tip;
    private variable number_racks_layer;
    private variable counter_tip_start;
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::gettips_384head\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    traceLevel = TRACELEVEL::GetTraceLevel();
    tips_needed = 96;
    seq_end = tip_sequence.GetCount();
    number_racks_total = seq_end / 96;
    number_racks_layer = number_racks_total / 4;
    tip_current_pos = tip_sequence.GetCurrentPosition();
    tiprack_current_pos = tiprack_sequence.GetCurrentPosition();
    if (traceLevel == 2)
    {
      TrcTrace4(Translate("---------------------------Tip start = "), tip_current_pos, Translate(" and tiprack start = "), tiprack_current_pos);
    }
    if (tip_current_pos == 0)
    {
      dialogHandle_28.SetOutput(Translate("Please reload the empty tip stack carrier."));
      dialogHandle_28.ShowOutput(Translate("Reload tip stack"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      tip_sequence.SetCurrentPosition(1);
      tip_current_pos = 1;
      tiprack_sequence.SetCurrentPosition(1);
    }
    temp = 96 * number_racks_layer;
    first_covered_tip = tiprack_current_pos + temp;
    if (first_covered_tip > seq_end)
    {
      first_covered_tip = seq_end + 1;
    }
    available = first_covered_tip - tip_current_pos;
    if (traceLevel == 2)
    {
      TrcTrace4(Translate("--------First covered tip = "), first_covered_tip, Translate(" and available tips = "), available);
    }
    if (tips_needed > available)
    {
      discard_empty_racks_96format(ML_STAR, tip_sequence, tiprack_sequence, tiprack_waste_sequence, CORE_after);
      tip_current_pos = tip_sequence.GetCurrentPosition();
      tiprack_current_pos = tiprack_sequence.GetCurrentPosition();
      temp = 96 * number_racks_layer;
      first_covered_tip = tiprack_current_pos + temp;
      if (first_covered_tip > seq_end)
      {
        first_covered_tip = seq_end + 1;
      }
      available = first_covered_tip - tip_current_pos;
      if (tips_needed > available)
      {
        dialogHandle_27.SetOutput(Translate("Please reload the empty tip stack carrier."));
        dialogHandle_27.ShowOutput(Translate("Reload tip stack"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        tip_sequence.SetCurrentPosition(1);
        tip_current_pos = 1;
        tiprack_sequence.SetCurrentPosition(1);
      }
    }
    ML_STAR._BAE15959_BFAF_451b_AEBC_25AE7E04EB82("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"); // Head384TipPickUp
    counter_tip_start = tip_sequence.GetCurrentPosition();
    update_tip_counter(tipcounter_name, counter_tip_start);
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::gettips_384head END\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }

  function load_GUI_96format( device & ML_STAR, sequence & tip_sequence, sequence & tiprack_sequence, variable description_of_position, variable tip_needed, variable tipcounter_name ) void {
    private dialog dialogHandle_29;
    private dialog dialogHandle_30;
    private dialog dialogHandle_31;
    private dialog dialogHandle_32;
    private dialog dialogHandle_33;
    private variable GUI_message;
    private variable rack_message;
    private variable total_racks;
    private variable max_rack_start;
    private variable total_tips_message;
    private variable counter_first_tip;
    private variable tips_in_first_rack_max;
    private variable temp;
    private variable first_available_rack;
    private variable tiprack_end;
    private variable tip_message;
    private variable counter_first_rack;
    private variable Front_end_tip_counter_value;
    private variable traceLevel;
    private variable needed_racks;
    private variable pipetting_tool;
    private variable loopCounter1;
    private variable first_available_tip;
    private variable total_tips;
    private variable break_loop_flag;
    private variable needed_tips_last_rack;
    private variable tip_start;
    private variable tiprack_start;
    private variable counter_tip_start;
    private variable tip_end;
    private variable not_enough_tips_return;
    private dialog customDialog_34;
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::LoadGUI\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    traceLevel = TRACELEVEL::GetTraceLevel();
    tiprack_start = tiprack_sequence.GetCurrentPosition();
    tiprack_end = tiprack_sequence.GetCount();
    total_racks = tiprack_end - tiprack_start;
    total_racks = total_racks / 96.0;
    total_racks = MthCeiling(total_racks);
    if (traceLevel == 2)
    {
      TrcTrace(Translate("----------------in load, total racks = "), total_racks);
    }
    needed_racks = tip_needed / 96.0;
    needed_racks = MthCeiling(needed_racks);
    if (needed_racks == 0)
    {
      needed_racks = 1;
    }
    needed_tips_last_rack = tip_needed % 96;
    if (needed_tips_last_rack == 0)
    {
      needed_tips_last_rack = 96;
    }
    if (traceLevel == 2)
    {
      TrcTrace4(Translate("------------- needed racks = "), needed_racks, Translate(" and number of tips needed in final rack = "), needed_tips_last_rack);
    }
    if (needed_racks > total_racks)
    {
      dialogHandle_32.SetOutput(Translate("This method will need extra tips during the run.  A dialogue box will come up when reloading is required."));
      dialogHandle_32.ShowOutput(Translate("Warning - tips must be loaded during the method"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
    }
    max_rack_start = total_racks - needed_racks;
    max_rack_start = max_rack_start + 1;
    if (max_rack_start > total_racks)
    {
      max_rack_start = total_racks;
    }
    tips_in_first_rack_max = 96 - needed_tips_last_rack;
    tips_in_first_rack_max = tips_in_first_rack_max + 1;
    if (traceLevel == 2)
    {
      TrcTrace4(Translate("------------- max_rack_start = "), max_rack_start, Translate(" tips_in_first_rack_max = "), tips_in_first_rack_max);
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, tip_sequence, 6, Translate(""));
    dialogHandle_29.SetOutput(Translate("Please remove any empty or incomplete tip racks in the stacks "), description_of_position, Translate("."));
    dialogHandle_29.ShowOutput(Translate("Remove Empty and Incomplete Racks"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, tip_sequence, 5, Translate(""));
    if (needed_racks > total_racks)
    {
    }
    else
    {
      if (tip_needed == 0)
      {
        tip_message = StrConcat8(Translate("Number of "), Translate("Hamilton 50"), Translate("ul tips required to complete the method was entered as 0"), Translate("\n\n\tTherefore the number of TIP RACKS required is unknown"), Translate("\n\n\tIf the method runs out of tips, the user will be prompted to reload all the stacks for this tip type"), Translate(""), Translate(""), Translate(""));
        dialogHandle_31.SetOutput(tip_message, Translate("\n\nThe Hamilton NTR Visual Editor will now lauch to enable you to select a suitable starting position in the NTR stacks."));
        dialogHandle_31.ShowOutput(Translate("NTR tip requirements"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      else
      {
        total_tips_message = StrConcat8(Translate("To complete the method you will need "), tip_needed, Translate(" tips ("), Translate("Hamilton 50"), Translate("ul)"), Translate(""), Translate(""), Translate(""));
        if (needed_racks == 1)
        {
          rack_message = StrConcat8(Translate("\n\n\tTherefore you will need a minumum of "), needed_racks, Translate(" TIP RACK on the deck"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          rack_message = StrConcat8(Translate("\n\n\tTherefore you will need a minumum of "), needed_racks, Translate(" TIP RACKS on the deck"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        dialogHandle_33.SetOutput(total_tips_message, rack_message, Translate("\n\nThe Hamilton NTR Visual Editor will now lauch to enable you to select a suitable starting position in the NTR stacks."));
        dialogHandle_33.ShowOutput(Translate("NTR tip requirements"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    get_tip_counter(tipcounter_name, counter_tip_start);
    if (traceLevel == 2)
    {
      TrcTrace(Translate("counter tip start is "), counter_tip_start);
    }
    if (counter_tip_start == 0)
    {
      counter_tip_start = 1;
    }
    if (traceLevel == 2)
    {
      TrcTrace(Translate("counter tip start is "), counter_tip_start);
    }
    counter_first_rack = counter_tip_start / 96.0;
    if (traceLevel == 2)
    {
      TrcTrace(Translate("Counter first rack before ceiling is "), counter_first_rack);
    }
    counter_first_rack = MthCeiling(counter_first_rack);
    if (traceLevel == 2)
    {
      TrcTrace(Translate("Counter first rack after ceiling is "), counter_first_rack);
    }
    temp = counter_first_rack * 96;
    temp = temp - 96;
    counter_first_tip = counter_tip_start - temp;
    if (counter_first_tip != 1)
    {
      counter_first_tip = 1;
      counter_first_rack = counter_first_rack + 1;
    }
    if (traceLevel == 2)
    {
      TrcTrace(Translate("counter first tip at end of calculations is "), counter_first_tip);
    }
    if (needed_racks > total_racks)
    {
      max_rack_start = total_racks;
    }
    if (counter_first_rack > max_rack_start)
    {
      counter_first_rack = 1;
    }
    if (traceLevel == 2)
    {
      TrcTrace4(Translate("Counter first rack is "), counter_first_rack, Translate(" and max rack start is "), max_rack_start);
    }
    first_available_rack = counter_first_rack;
    if (first_available_rack < max_rack_start)
    {
      tips_in_first_rack_max = 96;
    }
    if (needed_racks > total_racks)
    {
      tips_in_first_rack_max = 96;
    }
    if (counter_first_tip > tips_in_first_rack_max)
    {
      counter_first_tip = 1;
    }
    if (traceLevel == 2)
    {
      TrcTrace(Translate("Max for first tip in racks is "), tips_in_first_rack_max);
      TrcTrace(Translate("counter first tip is "), counter_first_tip);
    }
    first_available_tip = 1;
    tip_start = first_available_rack * 96;
    tip_start = tip_start + first_available_tip;
    tip_start = tip_start - 96;
    if (traceLevel == 2)
    {
      TrcTrace(Translate("tip_start = "), tip_start);
    }
    tip_sequence.SetCurrentPosition(tip_start);
    VISUAL_NTR_LIBRARY_FOR_HAM_GB_NTR_LIBRARIES::NTR_Tip_Counter_Read(tip_sequence, tipcounter_name);
    if (traceLevel == 2)
    {
      TrcTrace(Translate("READ GUI tip counte value = "), Front_end_tip_counter_value);
    }
    VISUAL_NTR_LIBRARY_FOR_HAM_GB_NTR_LIBRARIES::Tip_Counter_Write_Internal(tip_sequence, tipcounter_name);
    if (traceLevel == 2)
    {
      TrcTrace(Translate("WRITE Front_end_tip_counter_value = "), Front_end_tip_counter_value);
    }
    pipetting_tool = Translate("mph");
    DeckVisualize::UpdateUsedPositions(ML_STAR, tip_sequence, 5, Translate(""));
    customDialog_34.InitCustomDialog("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");
    customDialog_34.ShowCustomDialog();
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        pipetting_tool = Translate("mph");
        GUI_message = StrConcat4(Translate("Select stacked "), Translate("Hamilton 50"), Translate("ul racks"), Translate(""));
        VISUAL_NTR_LIBRARY_FOR_HAM_GB_NTR_LIBRARIES::NTR_Seq_Edit(ML_STAR, tip_sequence, 0, 0, pipetting_tool, tipcounter_name, GUI_message);
        tip_start = tip_sequence.GetCurrentPosition();
        tip_end = tip_sequence.GetCount();
        total_tips = tip_end - tip_start;
        total_tips = total_tips + 1;
        if (traceLevel == 2)
        {
          TrcTrace4(Translate("tip needed = "), tip_needed, Translate(", total_tips = "), total_tips);
        }
        if (tip_needed == 0)
        {
          break_loop_flag = 1;
        }
        else
        {
          if (tip_needed > total_tips)
          {
            dialogHandle_30.SetOutput(Translate("From the selected starting position, there are not enough tips to complete the method."), Translate("\n\n\tAbort = Abort method."), Translate("\n\n\tRetry = Reselect starting position."), Translate("\n\n\tIgnore = Continue and reload tips when prompted during the method."));
            not_enough_tips_return = dialogHandle_30.ShowOutput(Translate("Not enough tips to complete method"), hslAbortRetryIgnore | hslInformation | hslDefButton1, hslInfinite);
            if (not_enough_tips_return == 3)
            {
              abort;
            }
            if (not_enough_tips_return == 5)
            {
              break_loop_flag = 1;
            }
          }
          else
          {
            break_loop_flag = 1;
          }
        }
        if (break_loop_flag == 1)
        {
          break;
        }
      }
    }
    tip_start = tip_sequence.GetCurrentPosition();
    first_available_rack = tip_start / 96.0;
    first_available_rack = MthCeiling(first_available_rack);
    tiprack_start = first_available_rack * 96;
    tiprack_start = tiprack_start - 95;
    tiprack_sequence.SetCurrentPosition(tiprack_start);
    counter_tip_start = tip_sequence.GetCurrentPosition();
    update_tip_counter(tipcounter_name, counter_tip_start);
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                                            NTR384DirectUse::LoadGUI END\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }
} // library namespace
