#pragma once
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "VirtualLabware\\VirtualLabware.hsl"
#include "HSLTrcLib.hsl"
#include "HSLErrLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NTR384_TO_WASTE_VENUS_GB4 {
  variable rack_waste_counter;
  function NTR384_to_waste_core_VENUS( device & ML_STAR, sequence & RackSequenceToThrowInWaste, sequence & RackPositionOnWasteBlock, variable Eject_CORE_Tool_After_Step, variable ParkISwapOnRight ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function NTR384_to_waste_core_VENUS( device & ML_STAR, sequence & RackSequenceToThrowInWaste, sequence & RackPositionOnWasteBlock, variable Eject_CORE_Tool_After_Step, variable ParkISwapOnRight ) void {
    private variable RackLabwareID;
    private variable number_channels;
    private variable RackLabwareIDWaste;
    private variable ntrANGLE;
    private variable iswapPresent;
    private variable Delta_X;
    private variable WasteLabwareID;
    private variable ntrX;
    private variable Delta_X_back;
    private variable ntrY;
    private variable ntrZ;
    private variable traceLevel;
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                      NTR384_to_waste_VENUS_GB4::NTR384_tp_waste_core_VENUS\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    traceLevel = TRACELEVEL::GetTraceLevel();
    if (traceLevel == 2)
    {
      TrcTrace(Translate("At start of loop rack_waste_counter = "), rack_waste_counter);
    }
    if (rack_waste_counter == 0)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 40, 0);
    }
    if (rack_waste_counter == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, -60, 0);
    }
    WasteLabwareID = SeqGetLabwareId(RackPositionOnWasteBlock);
    DevGetLabwarePosition(ML_STAR, WasteLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
    if (traceLevel == 2)
    {
      TrcTrace8(Translate("---------- Position of Waste: RackLabwareID = "), WasteLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
    DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
    if (traceLevel == 2)
    {
      TrcTrace8(Translate("---------- Position of Labware: RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    Delta_X = -25;
    Delta_X_back = Delta_X * -1;
    VIRTUALLABWARE::MoveSeq(ML_STAR, RackSequenceToThrowInWaste, Delta_X, 0, 0);
    RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
    DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
    if (traceLevel == 2)
    {
      TrcTrace8(Translate("---------- Shifted Grip Position:  RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    RackLabwareIDWaste = SeqGetLabwareId(RackPositionOnWasteBlock);
    DevGetLabwarePosition(ML_STAR, RackLabwareIDWaste, ntrX, ntrY, ntrZ, ntrANGLE);
    if (traceLevel == 2)
    {
      TrcTrace8(Translate("---------- Shifted Z Position:  RackLabwareIDWaste = "), RackLabwareIDWaste, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 0, 20);
    RackLabwareIDWaste = SeqGetLabwareId(RackPositionOnWasteBlock);
    DevGetLabwarePosition(ML_STAR, RackLabwareIDWaste, ntrX, ntrY, ntrZ, ntrANGLE);
    if (traceLevel == 2)
    {
      TrcTrace8(Translate("---------- Shifted Z Position:  RackLabwareIDWaste = "), RackLabwareIDWaste, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
    DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
    if (traceLevel == 2)
    {
      TrcTrace8(Translate("---------- Position of Labware: RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    onerror goto errLabel_1 ;
    err.Clear();
    if (ntrY > 433.8)
    {
      iswapPresent = DevGetCfgValueWithKey(ML_STAR, 36);
      if (iswapPresent != 0)
      {
        MECC::TraceComment(Translate("Park iSWAP on the left hand side"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    number_channels = DevGetCfgValueWithKey(ML_STAR, 1);
    if (Eject_CORE_Tool_After_Step == 1)
    {
      if (number_channels == 2)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
      }
      if (number_channels == 4)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
      }
      if (number_channels >= 8)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
      }
    }
    else
    {
      if (number_channels == 2)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
      }
      if (number_channels == 4)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
      }
      if (number_channels >= 8)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
      }
    }
    if (ntrY > 433.8)
    {
      if (iswapPresent != 0)
      {
        if (ParkISwapOnRight == 1)
        {
          MECC::TraceComment(Translate("Park iSWAP on the right hand side"));
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
      }
    }
    VIRTUALLABWARE::MoveSeq(ML_STAR, RackSequenceToThrowInWaste, Delta_X_back, 0, 0);
    RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
    DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
    if (traceLevel == 2)
    {
      TrcTrace8(Translate("---------- Position of Labware:  RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    RackLabwareIDWaste = SeqGetLabwareId(RackPositionOnWasteBlock);
    DevGetLabwarePosition(ML_STAR, RackLabwareIDWaste, ntrX, ntrY, ntrZ, ntrANGLE);
    if (traceLevel == 2)
    {
      TrcTrace8(Translate("---------- Shifted Z Position:  RackLabwareIDWaste = "), RackLabwareIDWaste, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 0, -20);
    if (rack_waste_counter == 0)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, -40, 0);
    }
    if (rack_waste_counter == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 60, 0);
    }
    RackLabwareIDWaste = SeqGetLabwareId(RackPositionOnWasteBlock);
    DevGetLabwarePosition(ML_STAR, RackLabwareIDWaste, ntrX, ntrY, ntrZ, ntrANGLE);
    if (traceLevel == 2)
    {
      TrcTrace8(Translate("----------End of loop Shifted Position:  RackLabwareIDWaste = "), RackLabwareIDWaste, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    rack_waste_counter = rack_waste_counter + 1;
    if (rack_waste_counter > 1)
    {
      rack_waste_counter = 0;
    }
    if (traceLevel == 2)
    {
      TrcTrace(Translate("At end of loop rack_waste_counter = "), rack_waste_counter);
    }
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackSequenceToThrowInWaste, Delta_X_back, 0, 0);
      RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
      DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
      if (traceLevel == 2)
      {
        TrcTrace8(Translate("---------- Position of Labware:  RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
      }
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 0, -20);
      if (rack_waste_counter == 0)
      {
        VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, -40, 0);
      }
      if (rack_waste_counter == 1)
      {
        VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 60, 0);
      }
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n                                                      NTR384_to_waste_VENUS_GB4::NTR384_to_waste_core_VENUS END\n------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }
} // library namespace
