#pragma once
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "VirtualLabware\\VirtualLabware.hsl"
#include "HSLTrcLib.hsl"
#include "HSLErrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NTR_TO_WASTE_VENUS_GB4 {
  variable rack_waste_counter;
  function NTR_to_waste_core_VENUS( device & ML_STAR, sequence & RackSequenceToThrowInWaste, sequence & RackPositionOnWasteBlock, variable Eject_CORE_Tool_After_Step, variable ParkISwapOnRight, variable tip_volume ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function NTR_to_waste_core_VENUS( device & ML_STAR, sequence & RackSequenceToThrowInWaste, sequence & RackPositionOnWasteBlock, variable Eject_CORE_Tool_After_Step, variable ParkISwapOnRight, variable tip_volume ) void {
    private variable RackLabwareID;
    private variable ntrANGLE;
    private variable ntrX;
    private variable ntrY;
    private variable ntrZ;
    private variable Delta_X;
    private variable Delta_X_back;
    private variable WasteLabwareID;
    private variable iswapPresent;
    private variable number_channels;
    private variable RackLabwareIDWaste;
    TrcTrace(Translate("At start of loop rack_waste_counter = "), rack_waste_counter);
    if (rack_waste_counter == 0)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 40, 0);
    }
    if (rack_waste_counter == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, -60, 0);
    }
    WasteLabwareID = SeqGetLabwareId(RackPositionOnWasteBlock);
    DevGetLabwarePosition(ML_STAR, WasteLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
    TrcTrace8(Translate("---------- Position of Waste: RackLabwareID = "), WasteLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
    DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
    if(0){
      TrcTrace8(Translate("---------- Position of Labware: RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    Delta_X = -25;
    Delta_X_back = Delta_X * -1;
    VIRTUALLABWARE::MoveSeq(ML_STAR, RackSequenceToThrowInWaste, Delta_X, 0, 0);
    RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
    DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
    if(0){
      TrcTrace8(Translate("---------- Shifted Grip Position:  RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    RackLabwareIDWaste = SeqGetLabwareId(RackPositionOnWasteBlock);
    DevGetLabwarePosition(ML_STAR, RackLabwareIDWaste, ntrX, ntrY, ntrZ, ntrANGLE);
    TrcTrace8(Translate("---------- Shifted Z Position:  RackLabwareIDWaste = "), RackLabwareIDWaste, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    TrcTrace(Translate("*********************tip_volume = "), tip_volume);
    if (tip_volume == 10)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 0, 28);
    }
    if (tip_volume == 50)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 0, 9.6);
    }
    RackLabwareIDWaste = SeqGetLabwareId(RackPositionOnWasteBlock);
    DevGetLabwarePosition(ML_STAR, RackLabwareIDWaste, ntrX, ntrY, ntrZ, ntrANGLE);
    if(0){
      TrcTrace8(Translate("---------- Shifted Z Position:  RackLabwareIDWaste = "), RackLabwareIDWaste, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
    DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
    TrcTrace8(Translate("---------- Position of Labware: RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    onerror goto errLabel_1 ;
    err.Clear();
    if (ntrY > 433.8)
    {
      iswapPresent = DevGetCfgValueWithKey(ML_STAR, 36);
      if (iswapPresent != 0)
      {
        MECC::TraceComment(Translate("Park iSWAP on the left hand side"));
        ML_STAR.FirmwareCommand("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");
        ML_STAR.FirmwareCommand("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");
      }
    }
    number_channels = DevGetCfgValueWithKey(ML_STAR, 1);
    if (Eject_CORE_Tool_After_Step == 1)
    {
      if (number_channels == 2)
      {
        if (tip_volume == 10)
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
        else
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
      }
      if (number_channels == 4)
      {
        if (tip_volume == 10)
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
        else
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
      }
      if (number_channels >= 8)
      {
        if (tip_volume == 10)
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
        else
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
      }
    }
    else
    {
      if (number_channels == 2)
      {
        if (tip_volume == 10)
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
        else
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
      }
      if (number_channels == 4)
      {
        if (tip_volume == 10)
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
        else
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
      }
      if (number_channels >= 8)
      {
        if (tip_volume == 10)
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
        else
        {
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
      }
    }
    if (ntrY > 433.8)
    {
      if (iswapPresent != 0)
      {
        if (ParkISwapOnRight == 1)
        {
          MECC::TraceComment(Translate("Park iSWAP on the right hand side"));
          ML_STAR.FirmwareCommand("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");
          ML_STAR.FirmwareCommand("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");
        }
      }
    }
    VIRTUALLABWARE::MoveSeq(ML_STAR, RackSequenceToThrowInWaste, Delta_X_back, 0, 0);
    RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
    DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
    if(0){
      TrcTrace8(Translate("---------- Position of Labware:  RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    RackLabwareIDWaste = SeqGetLabwareId(RackPositionOnWasteBlock);
    DevGetLabwarePosition(ML_STAR, RackLabwareIDWaste, ntrX, ntrY, ntrZ, ntrANGLE);
    if(0){
      TrcTrace8(Translate("---------- Shifted Z Position:  RackLabwareIDWaste = "), RackLabwareIDWaste, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    if (tip_volume == 10)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 0, -28);
    }
    if (tip_volume == 50)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 0, -9.6);
    }
    if (rack_waste_counter == 0)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, -40, 0);
    }
    if (rack_waste_counter == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 60, 0);
    }
    RackLabwareIDWaste = SeqGetLabwareId(RackPositionOnWasteBlock);
    DevGetLabwarePosition(ML_STAR, RackLabwareIDWaste, ntrX, ntrY, ntrZ, ntrANGLE);
    TrcTrace8(Translate("----------End of loop Shifted Position:  RackLabwareIDWaste = "), RackLabwareIDWaste, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    rack_waste_counter = rack_waste_counter + 1;
    if (rack_waste_counter > 1)
    {
      rack_waste_counter = 0;
    }
    TrcTrace(Translate("At end of loop rack_waste_counter = "), rack_waste_counter);
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackSequenceToThrowInWaste, Delta_X_back, 0, 0);
      RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
      DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
      if(0){
        TrcTrace8(Translate("---------- Position of Labware:  RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
      }
      if (tip_volume == 10)
      {
        VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 0, -28);
      }
      if (tip_volume == 50)
      {
        VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 0, -9.6);
      }
      if (rack_waste_counter == 0)
      {
        VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, -40, 0);
      }
      if (rack_waste_counter == 1)
      {
        VIRTUALLABWARE::MoveSeq(ML_STAR, RackPositionOnWasteBlock, 0, 60, 0);
      }
    }   /* end if from skip handler if no error */
  }
} // library namespace
