#pragma once
#include "HSLMicrosoftExcel.hsl"
#include "HSLMthLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLChoiceDialog.hsl"
#include "Training\\HSLTrcLib.hsl"
#include "EmailUtilities\\HSLEmailUtilLib.hsl"
#include "HSLSeqLib.hsl"
#include "SMTs\\MedImmune\\MedImmune_SampleTrackingDBHelper SQLDB_2014.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace MEDIMMUNE_GENERAL {
  global variable advanceduser;
  function AdminDetect( variable & username, variable & userdomain ) void ;
  function CheckDatabaseConnection( device & ML_STARplus ) void ;
  private function CleanLeft( device & ML_STARplus ) void ;
  private function CleanLidPark( device & ML_STARplus ) void ;
  private function CleanMediaFill( device & ML_STARplus ) void ;
  private function CleanRight( device & ML_STARplus ) void ;
  function CleaningDecision( device & ML_STARplus, variable varReplace300, variable varReplace50, variable varReplace1000, variable username, variable varNoDeepClean, sequence & PlaceTips, sequence & GetTips, sequence & GetTips_Rack1, sequence & SafeTravel, variable varFeedOnly, variable var1000ulUsed ) void ;
  function CleaningOnly( device & ML_STARplus, variable varReplace300, variable varReplace50, variable varReplace1000, variable username, sequence & PlaceTips, sequence & GetTips, sequence & GetTips_Rack1, sequence & SafeTravel ) void ;
  private function DeepClean( device & ML_STARplus ) void ;
  private function DiscardTips( device & ML_STARplus, variable Discard300, variable Discard50 ) void ;
  function EndMethodCleanup( device & ML_STARplus ) void ;
  function EndOctetCleanup( device & ML_STARplus ) void ;
  private function LoadResevoir( device & ML_STARplus ) void ;
  function LockDoors( device & ML_STARplus ) void ;
  function OnAbortArmMove( device & ML_STARplus ) void ;
  private function Replace1000ulTips( device & ML_STARplus, variable varReplace1000 ) void ;
  private function Replace1000ulTips_New( device & ML_STARplus, variable varReplace1000 ) void ;
  private function Replace300ulTips( device & ML_STARplus, variable varReplace300 ) void ;
  private function Replace50ulTips( device & ML_STARplus, variable varReplace50 ) void ;
  private function SetUpMediaFill( device & ML_STARplus ) void ;
  function TipReplacement( device & ML_STARplus, variable varReplace300, variable varReplace50, variable varReplace1000, variable username, sequence & PlaceTips, sequence & GetTips, sequence & GetTips_Rack1, sequence & SafeTravel ) void ;
  function Transfer1000ulTips( device & ML_STARplus, variable varReplace1000, sequence & PlaceTips, sequence & GetTips, sequence & GetTips_Rack1, sequence & SafeTravel ) void ;
  private function UVDeck( device & ML_STARplus, variable cleantype ) void ;
  function UnLockDoors( device & ML_STARplus ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    MEDIMMUNE_SAMPLETRACKINGDBHELPER_SQLDB_2014::_InitLibrary();
  }
  function _ExitLibrary() {
    MEDIMMUNE_SAMPLETRACKINGDBHELPER_SQLDB_2014::_ExitLibrary();
  }

  function CleaningDecision( device & ML_STARplus, variable varReplace300, variable varReplace50, variable varReplace1000, variable username, variable varNoDeepClean, sequence & PlaceTips, sequence & GetTips, sequence & GetTips_Rack1, sequence & SafeTravel, variable varFeedOnly, variable var1000ulUsed ) void {
    private variable varTipsReplaced;
    private variable varDaysBetweenCleaning;
    private variable sqlStatement;
    private variable time;
    private file CLEANING_DATE_LOOKUP;
    private variable date;
    private variable endclean;
    private file CLEANING_DATABASE;
    private variable currentdate;
    private variable Pic_WasteBin;
    private variable LibraryPath;
    private dialog dialogHandle_1;
    private dialog dialogHandle_2;
    private dialog dialogHandle_3;
    private dialog dialogHandle3;
    private variable skipclean;
    private variable cleantype;
    if(0){
      advanceduser = 0;
      if(username == "albanettit")
      {advanceduser = 1;}
      if(username == "kloverj")
      {advanceduser = 1;}
      if(username == "KloverJ")
      {advanceduser = 1;}
    }
    skipclean = 7;
    if (advanceduser == 1)
    {
      dialogHandle3.SetOutput(Translate("Do you want to skip the cleaning protocols?"));
      skipclean = dialogHandle3.ShowOutput(Translate("Skip Cleaning"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
    }
    if (skipclean == 7)
    {
      MicrosoftExcel::Init();
      currentdate = TimGetFormattedDate(Translate("%m/%d/%y "));
      time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
      currentdate = currentdate + time;
      sqlStatement = Translate("SELECT * FROM [HamiltonCleaning] WHERE [Type] = 'DeepClean' ORDER BY [BeginDate] DESC");
      if(0){
        sqlStatement = StrConcat8(Translate("'SELECT * FROM [HamiltonCleaning] WHERE [Type] = 'DeepClean' ORDER BY [BeginDate] DESC'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        sqlStatement = StrConcat8(Translate("SELECT MAX(BeginDate) FROM [HamiltonCleaning] WHERE [Type] = 'DeepClean'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        dialogHandle_2.SetOutput(sqlStatement);
        dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      CLEANING_DATE_LOOKUP.AddField("BeginDate", date, hslString, 255);
      CLEANING_DATE_LOOKUP.SetDelimiter(";");
      if( 0 == CLEANING_DATE_LOOKUP.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
      }
      if( 0 == CLEANING_DATE_LOOKUP.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != CLEANING_DATE_LOOKUP.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      CLEANING_DATE_LOOKUP.RemoveFields();
      MicrosoftExcel::OpenFile(Translate("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\DateClean.xls"));
      MicrosoftExcel::SelectSheet(1);
      MicrosoftExcel::SetCellValue(1, 2, date);
      MicrosoftExcel::SetCellValue(2, 2, currentdate);
      MicrosoftExcel::SafeFile();
      MicrosoftExcel::GetCellValue(3, 2, varDaysBetweenCleaning);
      MicrosoftExcel::End();
      varDaysBetweenCleaning = StrIVal(varDaysBetweenCleaning);
      if(0){
        MthFFloor(varDaysBetweenCleaning);
        dialogHandle_1.SetOutput(varDaysBetweenCleaning);
        dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      varTipsReplaced = 0;
      if (varReplace1000 == 1)
      {
        varTipsReplaced = varTipsReplaced + 1;
      }
      if (varReplace300 == 1)
      {
        varTipsReplaced = varTipsReplaced + 1;
      }
      if (varReplace50 == 1)
      {
        varTipsReplaced = varTipsReplaced + 1;
      }
      if(0){
        dialogHandle_3.SetOutput(Translate("Check biohazard waste bin below Hamilton and replace if more then half full."), Translate("/n"), Translate("Press 'OK' to continue."));
        dialogHandle_3.ShowOutput(Translate("Check Waste Bin"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
      Pic_WasteBin = StrConcat2(LibraryPath, Translate("WasteBin.jpg"));
      HSLChoiceDialog::Init(Translate("Check Waste Bin"), Translate("Check Waste Bin"), HSLChoiceDialog::MODE::ONECHOICE);
      HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
      HSLChoiceDialog::AddChoice(Translate("Replace waste bin if greater\nthan 50% full.\nDO NOT remove the plastic\nchute at this time."), Pic_WasteBin, 1);
      HSLChoiceDialog::SetSize(900, 800);
      HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
      HSLChoiceDialog::DeInit();
      if (varNoDeepClean == 1)
      {
        if (varTipsReplaced == 3)
        {
          cleantype = Translate("ShortClean");
          LockDoors(ML_STARplus);
          DiscardTips(ML_STARplus, varReplace300, varReplace50);
          Replace300ulTips(ML_STARplus, varReplace300);
          Replace50ulTips(ML_STARplus, varReplace50);
          CleanLidPark(ML_STARplus);
          CleanMediaFill(ML_STARplus);
          if (varFeedOnly == 0)
          {
            LoadResevoir(ML_STARplus);
          }
          Replace1000ulTips_New(ML_STARplus, varReplace1000);
          if(0){
            Replace1000ulTips(ML_STARplus, varReplace1000);
          }
          UVDeck(ML_STARplus, cleantype);
          if(0){
            Transfer1000ulTips(ML_STARplus, varReplace1000, PlaceTips, GetTips, SafeTravel, GetTips_Rack1);
          }
          if (varFeedOnly == 0)
          {
            SetUpMediaFill(ML_STARplus);
          }
        }
        else
        {
          cleantype = Translate("ShortClean");
          LockDoors(ML_STARplus);
          DiscardTips(ML_STARplus, varReplace300, varReplace50);
          if (varReplace300 == 1)
          {
            Replace300ulTips(ML_STARplus, varReplace300);
          }
          if (varReplace50 == 1)
          {
            Replace50ulTips(ML_STARplus, varReplace50);
          }
          CleanLidPark(ML_STARplus);
          CleanMediaFill(ML_STARplus);
          if (varFeedOnly == 0)
          {
            LoadResevoir(ML_STARplus);
          }
          if (varReplace1000 == 1)
          {
            Replace1000ulTips_New(ML_STARplus, varReplace1000);
            if(0){
              Replace1000ulTips(ML_STARplus, varReplace1000);
            }
            UVDeck(ML_STARplus, cleantype);
            if(0){
              Transfer1000ulTips(ML_STARplus, varReplace1000, PlaceTips, GetTips, GetTips_Rack1, SafeTravel);
            }
          }
          else
          {
            UVDeck(ML_STARplus, cleantype);
          }
          if (varFeedOnly == 0)
          {
            SetUpMediaFill(ML_STARplus);
          }
        }
      }
      else
      {
        if (varTipsReplaced == 3)
        {
          if (varDaysBetweenCleaning >= 6)
          {
            cleantype = Translate("DeepClean");
            LockDoors(ML_STARplus);
            DeepClean(ML_STARplus);
            endclean = TimGetFormattedDate(Translate("%m/%d/%y "));
            time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
            endclean = endclean + time;
            if (varFeedOnly == 0)
            {
              LoadResevoir(ML_STARplus);
            }
            Replace300ulTips(ML_STARplus, varReplace300);
            Replace50ulTips(ML_STARplus, varReplace50);
            CleanLidPark(ML_STARplus);
            Replace1000ulTips_New(ML_STARplus, varReplace1000);
            if(0){
              Replace1000ulTips(ML_STARplus, varReplace1000);
            }
            UVDeck(ML_STARplus, cleantype);
            if(0){
              Transfer1000ulTips(ML_STARplus, varReplace1000, PlaceTips, GetTips, GetTips_Rack1, SafeTravel);
            }
            if (varFeedOnly == 0)
            {
              SetUpMediaFill(ML_STARplus);
            }
          }
          else
          {
            cleantype = Translate("ShortClean");
            LockDoors(ML_STARplus);
            DiscardTips(ML_STARplus, varReplace300, varReplace50);
            Replace300ulTips(ML_STARplus, varReplace300);
            Replace50ulTips(ML_STARplus, varReplace50);
            CleanLidPark(ML_STARplus);
            CleanMediaFill(ML_STARplus);
            if (varFeedOnly == 0)
            {
              LoadResevoir(ML_STARplus);
            }
            Replace1000ulTips_New(ML_STARplus, varReplace1000);
            if(0){
              Replace1000ulTips(ML_STARplus, varReplace1000);
            }
            UVDeck(ML_STARplus, cleantype);
            if(0){
              Transfer1000ulTips(ML_STARplus, varReplace1000, PlaceTips, GetTips, GetTips_Rack1, SafeTravel);
            }
            if (varFeedOnly == 0)
            {
              SetUpMediaFill(ML_STARplus);
            }
          }
        }
        else
        {
          if (varDaysBetweenCleaning >= 14)
          {
            cleantype = Translate("DeepClean");
            LockDoors(ML_STARplus);
            DeepClean(ML_STARplus);
            endclean = TimGetFormattedDate(Translate("%m/%d/%y "));
            time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
            endclean = endclean + time;
            if (varFeedOnly == 0)
            {
              LoadResevoir(ML_STARplus);
            }
            varReplace300 = 1;
            Replace300ulTips(ML_STARplus, varReplace300);
            varReplace50 = 1;
            Replace50ulTips(ML_STARplus, varReplace50);
            if(0){
              if (varReplace50 == 1)
              {
                Replace50ulTips(ML_STARplus, varReplace50);
              }
              if (varReplace300 == 1)
              {
                Replace300ulTips(ML_STARplus, varReplace300);
              }
            }
            CleanLidPark(ML_STARplus);
            if (var1000ulUsed == 1)
            {
              varReplace1000 = 1;
              Replace1000ulTips_New(ML_STARplus, varReplace1000);
              if(0){
                Replace1000ulTips(ML_STARplus, varReplace1000);
              }
              UVDeck(ML_STARplus, cleantype);
              if(0){
                Transfer1000ulTips(ML_STARplus, varReplace1000, PlaceTips, GetTips, GetTips_Rack1, SafeTravel);
              }
            }
            else
            {
              UVDeck(ML_STARplus, cleantype);
            }
            if (varFeedOnly == 0)
            {
              SetUpMediaFill(ML_STARplus);
            }
          }
          else
          {
            cleantype = Translate("ShortClean");
            LockDoors(ML_STARplus);
            DiscardTips(ML_STARplus, varReplace300, varReplace50);
            if (varReplace300 == 1)
            {
              Replace300ulTips(ML_STARplus, varReplace300);
            }
            if (varReplace50 == 1)
            {
              Replace50ulTips(ML_STARplus, varReplace50);
            }
            CleanLidPark(ML_STARplus);
            CleanMediaFill(ML_STARplus);
            if (varFeedOnly == 0)
            {
              LoadResevoir(ML_STARplus);
            }
            if (varReplace1000 == 1)
            {
              Replace1000ulTips_New(ML_STARplus, varReplace1000);
              if(0){
                Replace1000ulTips(ML_STARplus, varReplace1000);
              }
              UVDeck(ML_STARplus, cleantype);
              if(0){
                Transfer1000ulTips(ML_STARplus, varReplace1000, PlaceTips, GetTips, GetTips_Rack1, SafeTravel);
              }
            }
            else
            {
              UVDeck(ML_STARplus, cleantype);
            }
            if (varFeedOnly == 0)
            {
              SetUpMediaFill(ML_STARplus);
            }
          }
        }
      }
      UnLockDoors(ML_STARplus);
      if (cleantype == "DeepClean")
      {
        CLEANING_DATABASE.AddField("BeginDate", currentdate, hslString, 255);
        CLEANING_DATABASE.AddField("EndDate", endclean, hslString, 255);
        CLEANING_DATABASE.AddField("Type", cleantype, hslString, 255);
        CLEANING_DATABASE.AddField("Username", username, hslString, 255);
        CLEANING_DATABASE.AddField("Tips1mL", varReplace1000, hslInteger);
        CLEANING_DATABASE.AddField("Tips300uL", varReplace300, hslInteger);
        CLEANING_DATABASE.AddField("Tips50ul", varReplace50, hslInteger);
        CLEANING_DATABASE.SetDelimiter(";");
        if( 0 == CLEANING_DATABASE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [HamiltonCleaning]", SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
      }
      else
      {
        CLEANING_DATABASE.AddField("BeginDate", currentdate, hslString, 255);
        CLEANING_DATABASE.AddField("Type", cleantype, hslString, 255);
        CLEANING_DATABASE.AddField("Username", username, hslString, 255);
        CLEANING_DATABASE.AddField("Tips1mL", varReplace1000, hslInteger);
        CLEANING_DATABASE.AddField("Tips300uL", varReplace300, hslInteger);
        CLEANING_DATABASE.AddField("Tips50ul", varReplace50, hslInteger);
        CLEANING_DATABASE.SetDelimiter(";");
        if( 0 == CLEANING_DATABASE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [HamiltonCleaning]", SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
      }
      if( 0 == CLEANING_DATABASE.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != CLEANING_DATABASE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      CLEANING_DATABASE.RemoveFields();
    }
  }

  private function Replace1000ulTips( device & ML_STARplus, variable varReplace1000 ) void {
    private variable Pic_Left1000Open;
    private variable LibraryPath;
    private variable Pic_Left1000Covered;
    private variable Pic_Left1000Empty;
    private variable Pic_LeftClosed;
    private variable Pic_LeftDeck;
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_LeftDeck = StrConcat2(LibraryPath, Translate("Deck_Left.jpg"));
    Pic_Left1000Empty = StrConcat2(LibraryPath, Translate("Deck_Left_1000Empty.jpg"));
    Pic_Left1000Covered = StrConcat2(LibraryPath, Translate("Deck_Left_1000Covered.jpg"));
    Pic_Left1000Open = StrConcat2(LibraryPath, Translate("Deck_Left_1000Open.jpg"));
    Pic_LeftClosed = StrConcat2(LibraryPath, Translate("LeftClosed.jpg"));
    HSLChoiceDialog::Init(Translate("Load 1000ul Tips"), Translate("Load 1000ul Tips"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove the third carrier (from left) from the deck."), Pic_LeftDeck, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Clean blisterpack carrier with alcohol and load onto deck."), Pic_Left1000Empty, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Spray blisterpack of 1000ul tips with alcohol and load onto carrier."), Pic_Left1000Covered, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 4: \n Remove cover from blisterpack of 1000ul tips."), Pic_Left1000Open, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 5: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
  }

  private function Replace300ulTips( device & ML_STARplus, variable varReplace300 ) void {
    private variable Pic_DeckRight_AllTips;
    private variable Pic_PlexiShelfWrapped;
    private variable Pic_PlexiShelfEmpty;
    private variable LibraryPath;
    private variable Pic_PlexiShelfUnwrapped;
    private variable Pic_RightClosed;
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_DeckRight_AllTips = StrConcat2(LibraryPath, Translate("Deck_Right_AllTips.jpg"));
    Pic_PlexiShelfEmpty = StrConcat2(LibraryPath, Translate("PlexiShelf_Empty.jpg"));
    Pic_PlexiShelfUnwrapped = StrConcat2(LibraryPath, Translate("PlexiShelf_UnwrappedTips.jpg"));
    Pic_PlexiShelfWrapped = StrConcat2(LibraryPath, Translate("PlexiShelf_WrappedTips.jpg"));
    Pic_RightClosed = StrConcat2(LibraryPath, Translate("RightClosed.jpg"));
    HSLChoiceDialog::Init(Translate("Load 300ul Tips"), Translate("Load 300ul Tips"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Clean plexiglass shelf with alcohol and place above lidpark station.\n Make sure that shelf is flush with the metal deck on the left."), Pic_PlexiShelfEmpty, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Spray down a sleeve of 300ul tips with alcohol and place on the shelf."), Pic_PlexiShelfWrapped, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Carefully remove the plastic wrapper from the tips."), Pic_PlexiShelfUnwrapped, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 4: \n Load the rack of 300ul tips onto the carrier."), Pic_DeckRight_AllTips, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 5: \n Close door and press 'continue'."), Pic_RightClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
  }

  private function Replace50ulTips( device & ML_STARplus, variable varReplace50 ) void {
    private variable Pic_DeckRight_AllTips;
    private variable Pic_PlexiShelfEmpty;
    private variable Pic_PlexiShelfWrapped;
    private variable LibraryPath;
    private variable Pic_PlexiShelfUnwrapped;
    private variable Pic_RightClosed;
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_DeckRight_AllTips = StrConcat2(LibraryPath, Translate("Deck_Right_AllTips.jpg"));
    Pic_PlexiShelfEmpty = StrConcat2(LibraryPath, Translate("PlexiShelf_Empty.jpg"));
    Pic_PlexiShelfUnwrapped = StrConcat2(LibraryPath, Translate("PlexiShelf_UnwrappedTips.jpg"));
    Pic_PlexiShelfWrapped = StrConcat2(LibraryPath, Translate("PlexiShelf_WrappedTips.jpg"));
    Pic_RightClosed = StrConcat2(LibraryPath, Translate("RightClosed.jpg"));
    HSLChoiceDialog::Init(Translate("Load 50ul Tips"), Translate("Load 50ul Tips"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Clean plexiglass shelf with alcohol and place above lidpark station.\n Make sure that shelf is flush with the metal deck on the left."), Pic_PlexiShelfEmpty, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Spray down a sleeve of 50ul tips with alcohol and place on the shelf."), Pic_PlexiShelfWrapped, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Carefully remove the plastic wrapper from the tips."), Pic_PlexiShelfUnwrapped, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 4: \n Load the rack of 50ul tips onto the carrier."), Pic_DeckRight_AllTips, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 5: \n Close door and press 'continue'."), Pic_RightClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
  }

  private function DeepClean( device & ML_STARplus ) void {
    private variable simulationCheck;
    private variable Pic_LidPark;
    private variable Pic_CORE96;
    private variable Pic_ArmLeft;
    private variable Pic_RightDeck;
    private variable LibraryPath;
    private variable Pic_LeftDeck;
    private variable Pic_iSwap;
    private variable Pic_WasteStation;
    private variable Pic_LeftClosed;
    private variable Pic_RightClosed;
    private variable Pic_Grippers;
    private variable Pic_LeftMediaFill;
    private variable Pic_RightEmpty;
    private variable Pic_LeftDeckEmpty;
    private variable Pic_1000Carrier;
    private dialog dialogHandle_4;
    simulationCheck = HSLML_STAR::IsSimulatorMode(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_1000Carrier = StrConcat2(LibraryPath, Translate("1000ulCarrier.jpg"));
    Pic_LeftDeck = StrConcat2(LibraryPath, Translate("Deck_Left.jpg"));
    Pic_RightDeck = StrConcat2(LibraryPath, Translate("Deck_Right.jpg"));
    Pic_LidPark = StrConcat2(LibraryPath, Translate("LidPark.jpg"));
    Pic_iSwap = StrConcat2(LibraryPath, Translate("iSwap.jpg"));
    Pic_CORE96 = StrConcat2(LibraryPath, Translate("CORE96.jpg"));
    Pic_ArmLeft = StrConcat2(LibraryPath, Translate("ArmLeft.jpg"));
    Pic_WasteStation = StrConcat2(LibraryPath, Translate("WasteStation.jpg"));
    Pic_Grippers = StrConcat2(LibraryPath, Translate("Grippers.jpg"));
    Pic_LeftClosed = StrConcat2(LibraryPath, Translate("LeftClosed.jpg"));
    Pic_RightClosed = StrConcat2(LibraryPath, Translate("RightClosed.jpg"));
    Pic_LeftDeckEmpty = StrConcat2(LibraryPath, Translate("Deck_Left_Empty.jpg"));
    Pic_RightEmpty = StrConcat2(LibraryPath, Translate("Deck_Right_Empty.jpg"));
    Pic_LeftMediaFill = StrConcat2(LibraryPath, Translate("Deck_Left_MediaFill.jpg"));
    dialogHandle_4.SetOutput(Translate("The allotted amount of time between deep cleanings has elapsed.\n"), Translate("You will be required to perform a full clean today.\n"), Translate("This will require that 50uL, 300uL and 1000uL (if necessary) be replaced."));
    dialogHandle_4.ShowOutput(Translate("Deep Cleaning"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    HSLChoiceDialog::Init(Translate("Deep Cleaning"), Translate("Clean the right side of the deck as follows."), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove all carriers from the right side of the deck."), Pic_RightDeck, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Remove the plastic chute."), Pic_WasteStation, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Attach a new plastic chute to the waste station and ensure\n that the chute is open and directed into the waste bin."), Pic_WasteStation, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 4: \n Clean the gold and silver waste station with alcohol.\n DO NOT clean the teaching tips."), Pic_WasteStation, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 5: \n Clean right side of the deck with alcohol wipes.\n Be sure to clean metal backstop as well."), Pic_RightEmpty, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 6: \n Clean Lid Park Station with alcohol wipes. Be sure to\n clean the top and bottom of the tower levels as well\n as the metal shelf in front of the Octet."), Pic_LidPark, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 7: \n Throw out all remaining tips and clean 300ul and 50ul tip carriers with\n alcohol and replace on deck with the identification labels facing front."), Pic_RightDeck, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 8: \n Clean the 1000ul tip carrier, be sure to remove the two-pronged\n inserts and clean them individually before replacing on deck with\n the identification label facing front."), Pic_1000Carrier, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 9: \n Close door and press 'continue'."), Pic_RightClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    HSLChoiceDialog::Init(Translate("Deep Cleaning"), Translate("Clean the left side of the deck as follows."), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove all carriers and tube weights from the\n left side of the deck."), Pic_LeftDeck, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    HSLChoiceDialog::Init(Translate("Deep Cleaning"), Translate("Clean the left arm as follows."), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Gently clean arm with microcide.\n DO NOT use alcohol or spray arm."), Pic_ArmLeft, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Gently clean all 8 pipetting channels with microcide. DO NOT use\n alcohol or spray channels and DO NOT clean circuit boards."), Pic_ArmLeft, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    UnLockDoors(ML_STARplus);
    ML_STARplus._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    HSLChoiceDialog::Init(Translate("Deep Cleaning"), Translate("Clean the CO-RE 96 head as follows."), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Gently clean 96 channel head with microcide.\n DO NOT use alcohol or spray head."), Pic_CORE96, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
    ML_STARplus._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    if (simulationCheck == 0)
    {
      onerror goto errLabel_5 ;
      err.Clear();
      {
        	ML_STARplus._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      errLabel_5 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        UnLockDoors(ML_STARplus);
        HSLChoiceDialog::Init(Translate("Deep Cleaning"), Translate("Clean the iSWAP as follows."), HSLChoiceDialog::MODE::ONECHOICE);
        HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
        HSLChoiceDialog::AddChoice(Translate("Step 1: \n Gently clean the iSWAP with microcide.\n DO NOT use alcohol or spray iSWAP."), Pic_iSwap, 1);
        HSLChoiceDialog::AddChoice(Translate("Step 2: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
        HSLChoiceDialog::SetSize(1400, 800);
        HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
        HSLChoiceDialog::DeInit();
        LockDoors(ML_STARplus);
      }   /* end if from skip handler if no error */
    }
    else
    {
      UnLockDoors(ML_STARplus);
      HSLChoiceDialog::Init(Translate("Deep Cleaning"), Translate("Clean the iSWAP as follows."), HSLChoiceDialog::MODE::ONECHOICE);
      HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
      HSLChoiceDialog::AddChoice(Translate("Step 1: \n Gently clean the iSWAP with microcide.\n DO NOT use alcohol or spray iSWAP."), Pic_iSwap, 1);
      HSLChoiceDialog::AddChoice(Translate("Step 2: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
      HSLChoiceDialog::SetSize(1400, 800);
      HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
      HSLChoiceDialog::DeInit();
      LockDoors(ML_STARplus);
    }
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    HSLChoiceDialog::Init(Translate("Deep Cleaning"), Translate("Clean the left side of the deck as follows."), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Clean left side of the deck with alcohol wipes.\n Be sure to clean metal backstop and gold waste station as well.\n While cleaning waste station DO NOT clean the teaching tips."), Pic_LeftDeckEmpty, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Clean the media fill station with alcohol wipes."), Pic_LeftMediaFill, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Clean the CO-RE grippers with alcohol wipes."), Pic_Grippers, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 4: \n Clean carriers with alcohol and replace on deck with the\n identification labels facing front."), Pic_LeftDeck, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 5: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
  }

  private function LoadResevoir( device & ML_STARplus ) void {
    private variable Pic_MediaFill;
    private variable LibraryPath;
    private variable Pic_LeftClosed;
    private variable Pic_MediaFillLid;
    private variable Pic_MediaFillNoLid;
    private variable Pic_MediaFillWeights;
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_MediaFill = StrConcat2(LibraryPath, Translate("MediaFillStation.jpg"));
    Pic_MediaFillLid = StrConcat2(LibraryPath, Translate("MediaFillLid.jpg"));
    Pic_MediaFillNoLid = StrConcat2(LibraryPath, Translate("MediaFillNoLid.jpg"));
    Pic_MediaFillWeights = StrConcat2(LibraryPath, Translate("MediaFillWeights.jpg"));
    Pic_LeftClosed = StrConcat2(LibraryPath, Translate("LeftClosed.jpg"));
    HSLChoiceDialog::Init(Translate("Set Up Media Fill Station"), Translate("Set Up Media Fill Station"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Place a lidded sterile reservoir at the media fill station."), Pic_MediaFillLid, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Remove lid from reservoir."), Pic_MediaFillNoLid, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Attach sterile tubing to the media fill station."), Pic_MediaFill, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 4: \n Clean weights with alcohol and place over tube to hold it stationary."), Pic_MediaFillWeights, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 5: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
    HSLChoiceDialog::SetSize(1200, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
  }

  function Transfer1000ulTips( device & ML_STARplus, variable varReplace1000, sequence & PlaceTips, sequence & GetTips, sequence & GetTips_Rack1, sequence & SafeTravel ) void {
    private variable NumtoDispose;
    private variable loopCounter2;
    private variable numOfTipRacks;
    private variable loopCounter1;
    private variable LibraryPath;
    private variable Pic_LeftDeck;
    private variable Pic_Left1000Empty;
    private variable Pic_LeftClosed;
    NumtoDispose = 5;
    numOfTipRacks = 5;
    PlaceTips.SetCurrentPosition(1);
    GetTips.SetCurrentPosition(1);
    SafeTravel.SetCurrentPosition(1);
    UnLockDoors(ML_STARplus);
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    {
      for(loopCounter2 = 0; loopCounter2 < NumtoDispose;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STARplus._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STARplus._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if(0){
          if (loopCounter2 == NumtoDispose)
          {
            ML_STARplus._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          }
          else
          {
            ML_STARplus._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          }
        }
      }
    }
    PlaceTips.SetCurrentPosition(1);
    {
      for(loopCounter1 = 0; loopCounter1 < numOfTipRacks;)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STARplus._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        if (loopCounter1 == 5)
        {
          ML_STARplus._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
          ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
        if (loopCounter1 == numOfTipRacks)
        {
          ML_STARplus._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        else
        {
          ML_STARplus._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
      }
    }
    ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    if(0){
      PlaceTips.SetCurrentPosition(1);
      GetTips.SetCurrentPosition(97);
      {
        for(loopCounter1 = 0; loopCounter1 < 3;)
        {
          loopCounter1 = loopCounter1 + 1;
          ML_STARplus._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          if (loopCounter1 == 5)
          {
            ML_STARplus._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
            ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          if (loopCounter1 == numOfTipRacks)
          {
            ML_STARplus._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          }
          else
          {
            ML_STARplus._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          }
        }
      }
      ML_STARplus._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STARplus._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
      ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STARplus._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      ML_STARplus._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STARplus._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
      ML_STARplus._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STARplus._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    ML_STARplus._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_Left1000Empty = StrConcat2(LibraryPath, Translate("Deck_Left_1000Empty.jpg"));
    Pic_LeftDeck = StrConcat2(LibraryPath, Translate("Deck_Left.jpg"));
    Pic_LeftClosed = StrConcat2(LibraryPath, Translate("LeftClosed.jpg"));
    HSLChoiceDialog::Init(Translate("Load 1000ul Tips"), Translate("Load 1000ul Tips"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove blisterpack carrier from deck."), Pic_Left1000Empty, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Clean standard carrier with alcohol and replace on deck."), Pic_LeftDeck, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
  }

  private function CleanRight( device & ML_STARplus ) void {
    private variable Pic_LidPark;
    private variable Pic_RightDeck;
    private variable LibraryPath;
    private variable Pic_RightClosed;
    private variable Pic_RightEmpty;
    private variable Pic_1000Carrier;
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_RightDeck = StrConcat2(LibraryPath, Translate("Deck_Right.jpg"));
    Pic_1000Carrier = StrConcat2(LibraryPath, Translate("1000ulCarrier.jpg"));
    Pic_RightEmpty = StrConcat2(LibraryPath, Translate("Deck_Right_Empty.jpg"));
    Pic_LidPark = StrConcat2(LibraryPath, Translate("LidPark.jpg"));
    Pic_RightClosed = StrConcat2(LibraryPath, Translate("RightClosed.jpg"));
    HSLChoiceDialog::Init(Translate("Clean Right Side of Hamilton"), Translate("Clean Right Side of Hamilton"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove all carriers from the right side of the deck."), Pic_RightDeck, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Clean right side of the deck with alcohol wipes.\n Be sure to clean metal backstop as well."), Pic_RightEmpty, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Clean lid park station with alcohol wipes."), Pic_LidPark, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 4: \n Throw out any remaining tips and clean 300ul and 50ul tip carriers with alcohol and replace on deck\n with the identification labels facing front."), Pic_RightDeck, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 5: \n Clean the 1000ul tip carrier, be sure to remove the two-pronged\n inserts and clean them individually before replacing on deck with\n the identification label facing front."), Pic_1000Carrier, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 6: \n Close door and press 'continue'."), Pic_RightClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
  }

  private function CleanLeft( device & ML_STARplus ) void {
    private variable LibraryPath;
    private variable Pic_LeftDeck;
    private variable Pic_LeftClosed;
    private variable Pic_LeftMediaFill;
    private variable Pic_LeftDeckEmpty;
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_LeftDeck = StrConcat2(LibraryPath, Translate("Deck_Left.jpg"));
    Pic_LeftDeckEmpty = StrConcat2(LibraryPath, Translate("Deck_Left_Empty.jpg"));
    Pic_LeftClosed = StrConcat2(LibraryPath, Translate("LeftClosed.jpg"));
    Pic_LeftMediaFill = StrConcat2(LibraryPath, Translate("Deck_Left_MediaFill.jpg"));
    HSLChoiceDialog::Init(Translate("Clean Left Side of Hamilton"), Translate("Clean Left Side of Hamilton"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove all carriers from the left side of the deck."), Pic_LeftDeck, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Clean left side of the deck with alcohol wipes.\n Be sure to clean metal backstop and gold waste station as well.\n While cleaning waste station DO NOT clean the teaching tips."), Pic_LeftDeckEmpty, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Clean media fill station."), Pic_LeftMediaFill, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 4: \n Clean carriers with alcohol and replace on deck with the\n identification labels facing front."), Pic_LeftDeck, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 5: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
  }

  private function UVDeck( device & ML_STARplus, variable cleantype ) void {
    private timer UVTimer;
    private variable simulationCheck;
    private variable Pic_UV1;
    private variable Pic_UV2;
    private variable LibraryPath;
    private variable stopTimerOption;
    private variable timer_uv;
    private dialog dialogHandle1;
    private dialog customDialog_6;
    private dialog customDialog_7;
    private dialog customDialog_8;
    simulationCheck = HSLML_STAR::IsSimulatorMode(ML_STARplus);
    stopTimerOption = 1;
    if (cleantype == "DeepClean")
    {
      if (advanceduser == 0)
      {
        stopTimerOption = 0;
      }
    }
    timer_uv = 900;
    if (simulationCheck == 0)
    {
      if (stopTimerOption == 1)
      {
        UnLockDoors(ML_STARplus);
        customDialog_6.InitCustomDialog("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");
        customDialog_6.ShowCustomDialog();
        ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
        LockDoors(ML_STARplus);
        LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
        Pic_UV1 = StrConcat2(LibraryPath, Translate("UV1.jpg"));
        Pic_UV2 = StrConcat2(LibraryPath, Translate("UV2.jpg"));
        HSLChoiceDialog::Init(Translate("UV Sterilization"), Translate("UV Sterilization"), HSLChoiceDialog::MODE::ONECHOICE);
        HSLChoiceDialog::AddChoice(Translate("Step 1: \n Locate UV lamp timer on each HEPA filter."), Pic_UV1, 1);
        HSLChoiceDialog::AddChoice(Translate("Step 2: \n Turn each UV lamp timer to 15 minutes\n and press 'continue' when done."), Pic_UV2, 0);
        HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
        HSLChoiceDialog::SetSize(1400, 800);
        HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
        HSLChoiceDialog::DeInit();
        if( 0 == UVTimer.SetTimer(timer_uv) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == UVTimer.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        UnLockDoors(ML_STARplus);
        customDialog_7.InitCustomDialog("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");
        customDialog_7.ShowCustomDialog();
        ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
        LockDoors(ML_STARplus);
        LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
        Pic_UV1 = StrConcat2(LibraryPath, Translate("UV1.jpg"));
        Pic_UV2 = StrConcat2(LibraryPath, Translate("UV2.jpg"));
        HSLChoiceDialog::Init(Translate("UV Sterilization"), Translate("UV Sterilization"), HSLChoiceDialog::MODE::ONECHOICE);
        HSLChoiceDialog::AddChoice(Translate("Step 1: \n Locate UV lamp timer on each HEPA filter."), Pic_UV1, 1);
        HSLChoiceDialog::AddChoice(Translate("Step 2: \n Turn each UV lamp timer to 15 minutes\n and press 'continue' when done."), Pic_UV2, 0);
        HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
        HSLChoiceDialog::SetSize(1400, 800);
        HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
        HSLChoiceDialog::DeInit();
        if( 0 == UVTimer.SetTimer(timer_uv) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == UVTimer.WaitTimer(hslTrue, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    else
    {
      UnLockDoors(ML_STARplus);
      customDialog_8.InitCustomDialog("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");
      customDialog_8.ShowCustomDialog();
      ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      LockDoors(ML_STARplus);
      LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
      Pic_UV1 = StrConcat2(LibraryPath, Translate("UV1.jpg"));
      Pic_UV2 = StrConcat2(LibraryPath, Translate("UV2.jpg"));
      HSLChoiceDialog::Init(Translate("UV Sterilization"), Translate("UV Sterilization"), HSLChoiceDialog::MODE::ONECHOICE);
      HSLChoiceDialog::AddChoice(Translate("Step 1: \n Locate UV lamp timer on each HEPA filter."), Pic_UV1, 1);
      HSLChoiceDialog::AddChoice(Translate("Step 2: \n Turn each UV lamp timer to 15 minutes\n and press 'continue' when done."), Pic_UV2, 0);
      HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
      HSLChoiceDialog::SetSize(1400, 800);
      HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
      HSLChoiceDialog::DeInit();
      if( 0 == UVTimer.SetTimer(timer_uv) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == UVTimer.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    dialogHandle1.SetOutput(Translate("Please ensure that UV lights\non both sides of Hamilton are off.\n"), Translate("When both are off, please press [OK]."));
    dialogHandle1.ShowOutput(Translate("UV Lights Off?"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    UnLockDoors(ML_STARplus);
  }

  function LockDoors( device & ML_STARplus ) void {
    private variable loopCounter1;
    private variable varLocked;
    private variable simulationCheck;
    private dialog dialogHandle_9;
    simulationCheck = HSLML_STAR::IsSimulatorMode(ML_STARplus);
    if (simulationCheck == 0)
    {
      varLocked = 0;
      {
        loopCounter1 = 0;
        while (varLocked == 0)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_10 ;
          err.Clear();
          ML_STARplus._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          varLocked = 1;
          errLabel_10 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            dialogHandle_9.SetOutput(Translate("Error: The next step cannot be completed with the door open."), Translate("\n"), Translate("Please close the door and hit 'OK' to continue."));
            dialogHandle_9.ShowOutput(Translate("Error: Door Open"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }   /* end if from skip handler if no error */
        }
      }
    }
    else
    {
      TrcTrace(Translate("Doors Locked"), Translate(""));
    }
  }

  function UnLockDoors( device & ML_STARplus ) void {
    private variable simulationCheck;
    simulationCheck = HSLML_STAR::IsSimulatorMode(ML_STARplus);
    if (simulationCheck == 0)
    {
      ML_STARplus._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    else
    {
      TrcTrace(Translate("Doors Unlocked"), Translate(""));
    }
  }

  private function CleanLidPark( device & ML_STARplus ) void {
    private variable Pic_LidPark;
    private variable LibraryPath;
    private variable Pic_PlexiShelfEmpty;
    private variable Pic_RightClosed;
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_LidPark = StrConcat2(LibraryPath, Translate("LidPark.jpg"));
    Pic_PlexiShelfEmpty = StrConcat2(LibraryPath, Translate("PlexiShelf_Empty.jpg"));
    Pic_RightClosed = StrConcat2(LibraryPath, Translate("RightClosed.jpg"));
    HSLChoiceDialog::Init(Translate("Clean Lid Park Station"), Translate("Clean Lid Park Station"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove plexiglass shelf (if present) from lid park station."), Pic_PlexiShelfEmpty, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Clean Lid Park Station with alcohol wipes. Be sure to\n clean the top and bottom of the tower levels as well\n as the metal shelf in front of the Octet."), Pic_LidPark, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Close door and press 'continue'."), Pic_RightClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
  }

  private function CleanMediaFill( device & ML_STARplus ) void {
    private variable LibraryPath;
    private variable Pic_LeftDeck;
    private variable Pic_LeftClosed;
    private variable Pic_LeftMediaFill;
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_LeftDeck = StrConcat2(LibraryPath, Translate("Deck_Left.jpg"));
    Pic_LeftClosed = StrConcat2(LibraryPath, Translate("LeftClosed.jpg"));
    Pic_LeftMediaFill = StrConcat2(LibraryPath, Translate("Deck_Left_MediaFill2.jpg"));
    HSLChoiceDialog::Init(Translate("Clean Media Fill Station"), Translate("Clean Media Fill Station"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Clean media fill station."), Pic_LeftMediaFill, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Wipe down carriers with alcohol wipes.\n If there are any signs of a spill then fully\n remove carriers and thoroughly clean before\n replacing on deck."), Pic_LeftDeck, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
  }

  private function SetUpMediaFill( device & ML_STARplus ) void {
    private variable Pic_Welder;
    private variable LibraryPath;
    private variable Pic_MediaFillPump;
    private variable Pic_MediaFillClips;
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_MediaFillPump = StrConcat2(LibraryPath, Translate("MediaFillSetup.jpg"));
    Pic_MediaFillClips = StrConcat2(LibraryPath, Translate("MediaFillSetupClips.jpg"));
    Pic_Welder = StrConcat2(LibraryPath, Translate("Welder.jpg"));
    HSLChoiceDialog::Init(Translate("Set Up Media Fill Pump"), Translate("Consult the user guide for details on using the tubing welder."), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Weld filled media bottle to media fill station line."), Pic_Welder, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Remove all blue clips from tubing."), Pic_MediaFillClips, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Set up media fill station pump."), Pic_MediaFillPump, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 4: \n Press 'continue'"), Pic_MediaFillPump, 0);
    HSLChoiceDialog::SetSize(1000, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
  }

  function EndMethodCleanup( device & ML_STARplus ) void {
    private variable LibraryPath;
    private variable Pic_MediaFill;
    private variable Pic_LeftClosed;
    private variable Pic_LeftDeck;
    private variable Pic_MediaFillPump;
    private variable Pic_Liconic;
    private variable username;
    private variable errorEmailAddress;
    LockDoors(ML_STARplus);
    if(0){
      Trace ("Begin end method cleanup");
      ML_STARplus._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    Trace ("Begin end method cleanup");
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_Liconic = StrConcat2(LibraryPath, Translate("Liconic.jpg"));
    Pic_LeftDeck = StrConcat2(LibraryPath, Translate("Deck_Left.jpg"));
    Pic_LeftClosed = StrConcat2(LibraryPath, Translate("LeftClosed.jpg"));
    Pic_MediaFillPump = StrConcat2(LibraryPath, Translate("MediaFillSetup.jpg"));
    Pic_MediaFill = StrConcat2(LibraryPath, Translate("MediaFillStation.jpg"));
    HSLChoiceDialog::Init(Translate("End of Method Cleanup"), Translate("End of Method Cleanup"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove all plates from Liconic."), Pic_Liconic, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Remove media fill station tubing."), Pic_MediaFill, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Disassemble media fill pump."), Pic_MediaFillPump, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 4: \n Remove and discard reservoirs."), Pic_LeftDeck, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 5: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
    username = Translate("WangBe");
    errorEmailAddress = StrConcat2(username, Translate("@medimmune.com"));
    EmailUtilLib::ChangeRecieverAddress(errorEmailAddress);
    EmailUtilLib::SetEMailAddressOfSender(errorEmailAddress);
  }

  function EndOctetCleanup( device & ML_STARplus ) void {
    private variable Pic_RightDeck;
    private variable Pic_RightDeckOctet;
    private variable LibraryPath;
    private variable Pic_RightClosed;
    private variable Pic_1000Carrier;
    LockDoors(ML_STARplus);
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_1000Carrier = StrConcat2(LibraryPath, Translate("1000ulCarrier.jpg"));
    Pic_RightDeck = StrConcat2(LibraryPath, Translate("Deck_Right.jpg"));
    Pic_RightDeckOctet = StrConcat2(LibraryPath, Translate("Deck_Right_OctetFull.jpg"));
    Pic_RightClosed = StrConcat2(LibraryPath, Translate("RightClosed.jpg"));
    HSLChoiceDialog::Init(Translate("Clean Lid Park Station"), Translate("Clean Lid Park Station"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove octet biosensor carrier from deck."), Pic_RightDeckOctet, 1);
    HSLChoiceDialog::AddChoice(Translate("Step 2: \n Clean the 1000ul tip carrier, be sure to remove the two-pronged\n inserts and clean them individually."), Pic_1000Carrier, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 3: \n Replace the 1000ul tip carrier on deck with\n the identification label facing front."), Pic_RightDeck, 0);
    HSLChoiceDialog::AddChoice(Translate("Step 4: \n Close door and press 'continue'."), Pic_RightClosed, 0);
    HSLChoiceDialog::SetSize(1400, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
    UVDeck(ML_STARplus, Translate("DeepClean"));
  }

  private function DiscardTips( device & ML_STARplus, variable Discard300, variable Discard50 ) void {
    private variable Pic_RightDeck;
    private variable LibraryPath;
    private variable Pic_RightClosed;
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_RightDeck = StrConcat2(LibraryPath, Translate("Deck_Right.jpg"));
    Pic_RightClosed = StrConcat2(LibraryPath, Translate("RightClosed.jpg"));
    if (Discard300 == 1)
    {
      HSLChoiceDialog::Init(Translate("Discard Remaining Tips"), Translate("Discard Remaining Tips"), HSLChoiceDialog::MODE::ONECHOICE);
      HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
      HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove all 300ul tips and 50ul tips and rack holders\n from the carrier and discard. DO NOT remove the\n the carrier from the deck."), Pic_RightDeck, 1);
      HSLChoiceDialog::AddChoice(Translate("Step 2: \n Close door and press 'continue'."), Pic_RightClosed, 0);
      HSLChoiceDialog::SetSize(1400, 800);
      HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
      HSLChoiceDialog::DeInit();
    }
    else
    {
      if (Discard50 == 1)
      {
        HSLChoiceDialog::Init(Translate("Discard Remaining Tips"), Translate("Discard Remaining Tips"), HSLChoiceDialog::MODE::ONECHOICE);
        HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
        HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove all 50ul tips and rack holder\n from the carrier and discard. DO NOT remove the\n the carrier from the deck."), Pic_RightDeck, 1);
        HSLChoiceDialog::AddChoice(Translate("Step 2: \n Close door and press 'continue'."), Pic_RightClosed, 0);
        HSLChoiceDialog::SetSize(1400, 800);
        HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
        HSLChoiceDialog::DeInit();
      }
    }
    LockDoors(ML_STARplus);
  }

  function OnAbortArmMove( device & ML_STARplus ) void {
    private variable ArmMoveLocation;
    HSLChoiceDialog::Init(Translate("Abort"), Translate("What position do you want to arm to move to?"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Do not move arm."), Translate(""), 1);
    HSLChoiceDialog::AddChoice(Translate("Move arm left."), Translate(""), 0);
    HSLChoiceDialog::AddChoice(Translate("Move arm center."), Translate(""), 0);
    HSLChoiceDialog::AddChoice(Translate("Move arm right."), Translate(""), 0);
    HSLChoiceDialog::ShowDialogSingleChoice(ArmMoveLocation);
    HSLChoiceDialog::DeInit();
    LockDoors(ML_STARplus);
    if (ArmMoveLocation == 2)
    {
      ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    }
    if (ArmMoveLocation == 3)
    {
      ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    }
    if (ArmMoveLocation == 4)
    {
      ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    }
    UnLockDoors(ML_STARplus);
  }

  function CleaningOnly( device & ML_STARplus, variable varReplace300, variable varReplace50, variable varReplace1000, variable username, sequence & PlaceTips, sequence & GetTips, sequence & GetTips_Rack1, sequence & SafeTravel ) void {
    private variable cleantype;
    private variable sqlStatement;
    private variable currentdate;
    private variable Pic_WasteBin;
    private variable LibraryPath;
    private variable varDaysUntilClean;
    private variable varCleanDecision;
    private variable endclean;
    private variable time;
    private variable date;
    private variable varDaysBetweenCleaning;
    private file CLEANING_DATABASE;
    private file CLEANING_DATE_LOOKUP;
    private dialog dialogHandle_11;
    private dialog dialogHandle_12;
    private dialog dialogHandle_13;
    advanceduser = 0;
    if(username == "albanettit")
    {advanceduser = 1;}
    if(username == "WangBe")
    {advanceduser = 1;}
    if(username == "wangbe")
    {advanceduser = 1;}
    MicrosoftExcel::Init();
    currentdate = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    currentdate = currentdate + time;
    sqlStatement = Translate("SELECT * FROM [HamiltonCleaning] WHERE [Type] = 'DeepClean' ORDER BY [BeginDate] DESC");
    CLEANING_DATE_LOOKUP.AddField("BeginDate", date, hslString, 255);
    CLEANING_DATE_LOOKUP.SetDelimiter(";");
    if( 0 == CLEANING_DATE_LOOKUP.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 == CLEANING_DATE_LOOKUP.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != CLEANING_DATE_LOOKUP.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    CLEANING_DATE_LOOKUP.RemoveFields();
    MicrosoftExcel::OpenFile(Translate("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\DateClean.xls"));
    MicrosoftExcel::SelectSheet(1);
    MicrosoftExcel::SetCellValue(1, 2, date);
    MicrosoftExcel::SetCellValue(2, 2, currentdate);
    MicrosoftExcel::SafeFile();
    MicrosoftExcel::GetCellValue(3, 2, varDaysBetweenCleaning);
    MicrosoftExcel::End();
    varDaysBetweenCleaning = StrIVal(varDaysBetweenCleaning);
    varDaysUntilClean = 7 - varDaysBetweenCleaning;
    if (varDaysUntilClean < 0)
    {
      dialogHandle_12.SetOutput(Translate("The maximum amount of time between\n"), Translate("Deep Cleans has elapsed\n"), Translate("Please press [OK] to perform Deep Clean"));
      dialogHandle_12.ShowOutput(Translate("Deep Cleaning"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    else
    {
      dialogHandle_11.SetOutput(Translate("There are "), varDaysUntilClean, Translate(" days until a deep clean will be required.\n"), Translate("Do you want to run a deep clean now instead?"));
      varCleanDecision = dialogHandle_11.ShowOutput(Translate("Deep Cleaning"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
    }
    if (varCleanDecision == 7)
    {
      abort;
    }
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    Pic_WasteBin = StrConcat2(LibraryPath, Translate("WasteBin.jpg"));
    HSLChoiceDialog::Init(Translate("Check Waste Bin"), Translate("Check Waste Bin"), HSLChoiceDialog::MODE::ONECHOICE);
    HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
    HSLChoiceDialog::AddChoice(Translate("Replace waste bin if greater\nthan 50% full.\nDO NOT remove the plastic\nchute at this time."), Pic_WasteBin, 1);
    HSLChoiceDialog::SetSize(900, 800);
    HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
    HSLChoiceDialog::DeInit();
    cleantype = Translate("DeepClean");
    LockDoors(ML_STARplus);
    DeepClean(ML_STARplus);
    endclean = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    endclean = endclean + time;
    Replace300ulTips(ML_STARplus, varReplace300);
    Replace50ulTips(ML_STARplus, varReplace50);
    CleanLidPark(ML_STARplus);
    Replace1000ulTips_New(ML_STARplus, varReplace1000);
    if(0){
      Replace1000ulTips(ML_STARplus, varReplace1000);
    }
    UVDeck(ML_STARplus, cleantype);
    if(0){
      Transfer1000ulTips(ML_STARplus, varReplace1000, PlaceTips, GetTips, GetTips_Rack1, SafeTravel);
    }
    UnLockDoors(ML_STARplus);
    CLEANING_DATABASE.AddField("BeginDate", currentdate, hslString, 255);
    CLEANING_DATABASE.AddField("EndDate", endclean, hslString, 255);
    CLEANING_DATABASE.AddField("Type", cleantype, hslString, 255);
    CLEANING_DATABASE.AddField("Username", username, hslString, 255);
    CLEANING_DATABASE.AddField("Tips1mL", varReplace1000, hslInteger);
    CLEANING_DATABASE.AddField("Tips300uL", varReplace300, hslInteger);
    CLEANING_DATABASE.AddField("Tips50ul", varReplace50, hslInteger);
    CLEANING_DATABASE.SetDelimiter(";");
    if( 0 == CLEANING_DATABASE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [HamiltonCleaning]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 == CLEANING_DATABASE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != CLEANING_DATABASE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    CLEANING_DATABASE.RemoveFields();
    dialogHandle_13.SetOutput(Translate("Cleaning Complete"));
    dialogHandle_13.ShowOutput(Translate("Cleaning Complete"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }

  function TipReplacement( device & ML_STARplus, variable varReplace300, variable varReplace50, variable varReplace1000, variable username, sequence & PlaceTips, sequence & GetTips, sequence & GetTips_Rack1, sequence & SafeTravel ) void {
    private dialog dialogHandle_14;
    private dialog dialogHandle_15;
    private dialog dialogHandle_16;
    private variable cleantype;
    private variable sqlStatement;
    private variable currentdate;
    private variable Pic_WasteBin;
    private variable LibraryPath;
    private variable varDaysUntilClean;
    private variable varCleanDecision;
    private variable time;
    private variable endclean;
    private variable varDaysBetweenCleaning;
    private variable date;
    private file CLEANING_DATABASE;
    private file CLEANING_DATE_LOOKUP;
    advanceduser = 0;
    if(username == "albanettit")
    {advanceduser = 1;}
    if(username == "WangBe")
    {advanceduser = 1;}
    if(username == "wangbe")
    {advanceduser = 1;}
    MicrosoftExcel::Init();
    currentdate = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    currentdate = currentdate + time;
    if(0){
      sqlStatement = Translate("SELECT * FROM [HamiltonCleaning] WHERE [Type] = 'DeepClean' ORDER BY [BeginDate] DESC");
      CLEANING_DATE_LOOKUP.AddField("BeginDate", date, hslString, 255);
      CLEANING_DATE_LOOKUP.SetDelimiter(";");
      if( 0 == CLEANING_DATE_LOOKUP.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
      }
      if( 0 == CLEANING_DATE_LOOKUP.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != CLEANING_DATE_LOOKUP.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      CLEANING_DATE_LOOKUP.RemoveFields();
      MicrosoftExcel::OpenFile(Translate("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\DateClean.xls"));
      MicrosoftExcel::SelectSheet(1);
      MicrosoftExcel::SetCellValue(1, 2, date);
      MicrosoftExcel::SetCellValue(2, 2, currentdate);
      MicrosoftExcel::SafeFile();
      MicrosoftExcel::GetCellValue(3, 2, varDaysBetweenCleaning);
      MicrosoftExcel::End();
      varDaysBetweenCleaning = StrIVal(varDaysBetweenCleaning);
      varDaysUntilClean = 7 - varDaysBetweenCleaning;
      if (varDaysUntilClean < 0)
      {
        dialogHandle_16.SetOutput(Translate("The maximum amount of time between\n"), Translate("Deep Cleans has elapsed\n"), Translate("Please press [OK] to perform Deep Clean"));
        dialogHandle_16.ShowOutput(Translate("Deep Cleaning"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      else
      {
        dialogHandle_14.SetOutput(Translate("There are "), varDaysUntilClean, Translate(" days until a deep clean will be required.\n"), Translate("Do you want to run a deep clean now instead?"));
        varCleanDecision = dialogHandle_14.ShowOutput(Translate("Deep Cleaning"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
      }
      if (varCleanDecision == 7)
      {
        abort;
      }
      Pic_WasteBin = StrConcat2(LibraryPath, Translate("WasteBin.jpg"));
      HSLChoiceDialog::Init(Translate("Check Waste Bin"), Translate("Check Waste Bin"), HSLChoiceDialog::MODE::ONECHOICE);
      HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
      HSLChoiceDialog::AddChoice(Translate("Replace waste bin if greater\nthan 50% full.\nDO NOT remove the plastic\nchute at this time."), Pic_WasteBin, 1);
      HSLChoiceDialog::SetSize(900, 800);
      HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
      HSLChoiceDialog::DeInit();
    }
    LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
    cleantype = Translate("ShortClean");
    LockDoors(ML_STARplus);
    DiscardTips(ML_STARplus, varReplace300, varReplace50);
    if (varReplace300 == 1)
    {
      Replace300ulTips(ML_STARplus, varReplace300);
    }
    if (varReplace50 == 1)
    {
      Replace50ulTips(ML_STARplus, varReplace50);
    }
    CleanLidPark(ML_STARplus);
    if (varReplace1000 == 1)
    {
      Replace1000ulTips(ML_STARplus, varReplace1000);
      UVDeck(ML_STARplus, cleantype);
      Transfer1000ulTips(ML_STARplus, varReplace1000, PlaceTips, GetTips, GetTips_Rack1, SafeTravel);
    }
    else
    {
      UVDeck(ML_STARplus, cleantype);
    }
    UnLockDoors(ML_STARplus);
    CLEANING_DATABASE.AddField("BeginDate", currentdate, hslString, 255);
    CLEANING_DATABASE.AddField("EndDate", endclean, hslString, 255);
    CLEANING_DATABASE.AddField("Type", cleantype, hslString, 255);
    CLEANING_DATABASE.AddField("Username", username, hslString, 255);
    CLEANING_DATABASE.AddField("Tips1mL", varReplace1000, hslInteger);
    CLEANING_DATABASE.AddField("Tips300uL", varReplace300, hslInteger);
    CLEANING_DATABASE.AddField("Tips50ul", varReplace50, hslInteger);
    CLEANING_DATABASE.SetDelimiter(";");
    if( 0 == CLEANING_DATABASE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [HamiltonCleaning]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 == CLEANING_DATABASE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != CLEANING_DATABASE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    CLEANING_DATABASE.RemoveFields();
    dialogHandle_15.SetOutput(Translate("Cleaning Complete"));
    dialogHandle_15.ShowOutput(Translate("Cleaning Complete"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }

  function AdminDetect( variable & username, variable & userdomain ) void {
    private dialog dialogHandle_17;
    private dialog customDialog_18;
    private dialog dialogHandle_19;
    private dialog customDialog_20;
    private variable var_admin;
    private dialog customDialog_21;
    if(0){
      if (username == "star-04")
      {
        customDialog_18.InitCustomDialog("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");
        customDialog_18.ShowCustomDialog();
        username = customDialog_18.GetCustomDialogProperty( "textBox_UserName.Text" );
        dialogHandle_17.SetInputSize(1);
        dialogHandle_17.SetInputField(0, Translate("Enter your Medimmune username (NOT PRID)"), hslString, "");
        dialogHandle_17.ShowInput(Translate(""), hslInfinite, hslOKOnly | hslDefButton1);
        username = dialogHandle_17.GetInputField(0);
        userdomain = Translate("medimmune.com");
      }
      else
      {
        username = username;
        userdomain = Translate("astrazeneca.com");
      }
    }
    userdomain = Translate("astrazeneca.com");
    if(0){
      var_admin = 0;
      if (username == "krjp224")
      {
        var_admin = 1;
      }
      if (username == "kfnk811")
      {
        var_admin = 1;
      }
      if (username == "khkh800")
      {
        var_admin = 1;
      }
    }
    customDialog_21.InitCustomDialog("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");
    customDialog_21.ShowCustomDialog();
    username = customDialog_21.GetCustomDialogProperty( "textBox_UserName.Text" );
    if(0){
      if (var_admin == 1)
      {
        customDialog_20.InitCustomDialog("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");
        customDialog_20.ShowCustomDialog();
        username = customDialog_20.GetCustomDialogProperty( "textBox_UserName.Text" );
        dialogHandle_19.SetInputSize(1);
        dialogHandle_19.SetInputField(0, Translate("Enter your Medimmune username (NOT PRID)"), hslString, "");
        dialogHandle_19.ShowInput(Translate(""), hslInfinite, hslOKOnly | hslDefButton1);
        username = dialogHandle_19.GetInputField(0);
        userdomain = Translate("astrazeneca.com");
      }
      else
      {
        username = Translate("first.last");
      }
    }
    username = StrMakeLower(username);
    advanceduser = 0;
    if(username == "thomas.albanetti")
    {advanceduser = 1;}
    if(username == "judith.klover")
    {advanceduser = 1;}
    if(username == "bijay.khanal")
    {advanceduser = 1;}
    if(username == "christopher.brankin")
    {advanceduser = 1;}
    if(username == "emily.brannigan")
    {advanceduser = 1;}
  }

  private function Replace1000ulTips_New( device & ML_STARplus, variable varReplace1000 ) void {
    private dialog customDialog_22;
    private variable Pic_LeftClosed;
    private variable Pic_Left1000Open;
    private variable LibraryPath;
    private variable Pic_Left1000Covered;
    private variable Pic_LeftDeck;
    private variable Pic_Left1000Empty;
    ML_STARplus._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    UnLockDoors(ML_STARplus);
    customDialog_22.InitCustomDialog("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");
    customDialog_22.ShowCustomDialog();
    if(0){
      LibraryPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Library\\SMTs\\MedImmune\\MedImmune_General\\");
      Pic_LeftDeck = StrConcat2(LibraryPath, Translate("Deck_Left.jpg"));
      Pic_Left1000Empty = StrConcat2(LibraryPath, Translate("Deck_Left_1000Empty.jpg"));
      Pic_Left1000Covered = StrConcat2(LibraryPath, Translate("Deck_Left_1000Covered.jpg"));
      Pic_Left1000Open = StrConcat2(LibraryPath, Translate("Deck_Left_1000Open.jpg"));
      Pic_LeftClosed = StrConcat2(LibraryPath, Translate("LeftClosed.jpg"));
      HSLChoiceDialog::Init(Translate("Load 1000ul Tips"), Translate("Load 1000ul Tips"), HSLChoiceDialog::MODE::ONECHOICE);
      HSLChoiceDialog::SetButtonText(Translate("Continue"), Translate(""));
      HSLChoiceDialog::AddChoice(Translate("Step 1: \n Remove the third carrier (from left) from the deck."), Pic_LeftDeck, 1);
      HSLChoiceDialog::AddChoice(Translate("Step 2: \n Clean blisterpack carrier with alcohol and load onto deck."), Pic_Left1000Empty, 0);
      HSLChoiceDialog::AddChoice(Translate("Step 3: \n Spray blisterpack of 1000ul tips with alcohol and load onto carrier."), Pic_Left1000Covered, 0);
      HSLChoiceDialog::AddChoice(Translate("Step 4: \n Remove cover from blisterpack of 1000ul tips."), Pic_Left1000Open, 0);
      HSLChoiceDialog::AddChoice(Translate("Step 5: \n Close door and press 'continue'."), Pic_LeftClosed, 0);
      HSLChoiceDialog::SetSize(1400, 800);
      HSLChoiceDialog::ShowDialogSingleChoice(Translate(""));
      HSLChoiceDialog::DeInit();
    }
    LockDoors(ML_STARplus);
  }

  function CheckDatabaseConnection( device & ML_STARplus ) void {
    private variable sqlStatement;
    private file CHECK_DATABASE_CONNECTION;
    private dialog customDialog_23;
    sqlStatement = Translate("SELECT * FROM [HamiltonCleaning] WHERE [Type] = 'DeepClean' ORDER BY [BeginDate] DESC");
    onerror goto errLabel_24 ;
    err.Clear();
    CHECK_DATABASE_CONNECTION.SetDelimiter(";");
    if( 0 == CHECK_DATABASE_CONNECTION.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 != CHECK_DATABASE_CONNECTION.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    CHECK_DATABASE_CONNECTION.RemoveFields();
    TrcTrace(Translate("Database connection successfully established"), Translate(""));
    errLabel_24 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      TrcTrace(Translate("Database connection failed"), Translate(""));
      customDialog_23.InitCustomDialog("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");
      customDialog_23.ShowCustomDialog();
      abort;
    }   /* end if from skip handler if no error */
  }
} // library namespace
