#pragma once
#include "HSLMappingReport.hsl"
#include "HSLStrLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLMicrosoftExcel.hsl"
#include "Training\\HSLTrcLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLUtilLib.hsl"
#include "EmailUtilities\\HSLEmailUtilLib.hsl"
#include "HSLFileDirectoryLib.hsl"
#include "RemoveTextDelimitersFromAsciiTextFile.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace MEDIMMUNE_SAMPLETRACKINGDBHELPER_SQLDB_2014 {
  global variable SampleTrackingDB_glExperimentID;
  global variable SampleTrackingDB_glConnectionString;
  global variable SampleTrackingDB_glDBName;
  global variable SampleTrackingDB_glRunID;
  function Add24WellPlatePipettingDataToDB( variable & iArrSampleTrackingFiles[], variable iCultureVolume, variable iMediaVolume, variable imediatype, variable imedialot ) void ;
  function Add384wHitpickPipettingDataToDB( variable & iArrSampleTrackingFiles[], variable icultureVolume, variable imediaVolume, variable imediatype, variable imedialot ) void ;
  function Add96wHitpickPipettingDataToDB( variable & iArrSampleTrackingFiles[], variable icultureVolume, variable imediaVolume, variable imediatype, variable imedialot, variable ProcessStep ) void ;
  function AddCellDensityDataToDB( variable iTestPlateBarcode, variable iTestPlateWellID, variable iTotalCellDensity, variable iViableCellDensity, variable iViability ) void ;
  function AddCellDensityMethodToDB( variable iTestPlateBarcode, variable iAssayDay, variable iDilution, variable iDeviceSerialNumber, variable iResultLocation1, variable iAssaySpecificLot1, variable iAssaySpecificLot1Type, variable iAssaySpecificLot2, variable iAssaySpecificLot2Type ) void ;
  function AddCellDensityPipettingDataToDB( variable & iArrSampleTrackingFileNames[], variable & iArrCellCulturePlateBarcodes[], variable iSampleVol ) void ;
  function AddConfluenceDataToDB( variable iPlateBarcode, variable iWellID, variable iSampleVesselType, variable iConfluenceReading, variable iRandomNum ) void ;
  function AddConfluenceMethodToDB( variable iTestPlateBarcode, variable iTestPlateType, variable iAssayDay, variable iDeviceSerialNumber, variable iResultLocation1 ) void ;
  function AddFeedPipettingDataToDB( variable & iArrSampleTrackingFiles[], variable ipartAvol, variable ipartBvol, variable ipartAfeedtype, variable ipartAfeedlot, variable ipartBfeedtype, variable ipartBfeedlot ) void ;
  function AddFilterPlatePipettingDataToDB( variable & iArrSampleTrackingFiles[], variable iCultureVolume, variable iSourceFile ) void ;
  function AddOctetProAMethodToDB( variable iOctetPlateBarcode, variable iReadType, variable iAssayDay, variable iDilution, variable iBiosensorLot, variable iBiosensorType, variable iOctetMethodFile, variable iOctetDataDir, variable iOctetiniFile, variable iOctetSN ) void ;
  function AddOctetProAResultDataToDB_Manual( variable octetPlateBarcode, variable iOctetInputFile, variable NumSamplePlates, variable SampleVesselType ) void ;
  function AddOctetTestPlatePipettingDatatoDB( variable & iArrSampleTrackingFileNames[], variable & iArrCellCulturePlateBarcodes[], variable iDiluentName, variable iDiluentLot, variable iSampleVol, variable TotalVol ) void ;
  function AddParentalLocationDataToDB( variable iParentalID, variable iCulturePlateBarcode, variable iCulturePlateWellID, variable iPlateType ) void ;
  function AddParentalSummaryDataToDB( variable iParentalID, variable iConfluenceLimit, variable iNumWellsAbove, variable iNumWellsPicked ) void ;
  function AddPassagePlatePipettingDataToDB( variable & iArrSampleTrackingFiles[], variable & iCultureVolume[], variable & iMediaVolume[], variable & iTargetCellDensity[], variable & iTargetViaCellDensity[], variable & iTargetViability[], variable iDWPsThisTime, variable & iArrBarcodesPassagePlates[], variable iMediaType, variable iMediaLot ) void ;
  function AddTerminalPlatePipettingDataToDB( variable & iArrSampleTrackingFiles[], variable & iCultureVolume[], variable & iMediaVolume[], variable & iTargetCellDensity[], variable & iTargetViaCellDensity[], variable & iTargetViability[], variable iDWPsThisTime, variable & iArrBarcodesTerminalPlates[], variable iMediaType, variable iMediaLot ) void ;
  function BarcodedPlateListLiconic( variable PlateType, variable & BCPlateList, variable & ArrBCPlate[] ) void ;
  function CompareBarcodes( variable NumPlates, variable & LiconicBarcodes[], variable & SQLBarcodes[], variable & Match ) void ;
  function ConfluencePlateLookup( variable i_int_QueryType, variable i_int_numConfPlates, variable i_str_platetype, variable & i_arr_LiconicBCList[], variable & o_arr_confluencebarcodes[], variable & str_BarcodeList, variable & o_int_ConfluencePlatesInDB, variable & o_int_GoodFlag ) void ;
  function DDI_Confluence( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_int_WellNum ) void ;
  function DDI_CriticalReagents( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_str_ReagentName, variable i_str_ReagentLot, variable i_int_WellNum, variable i_str_ProcessStep ) void ;
  function DDI_CriticalReagents_Method4( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_str_ReagentName, variable i_str_ReagentLot, variable i_int_WellNum, variable i_str_ProcessStep ) void ;
  function DDI_Octet( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_int_WellNum ) void ;
  function DDI_SampleTransfer( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_int_DestWellNum, variable i_int_SourcetWellNum, variable i_str_ProcessStep ) void ;
  function DDI_ViableCellCount( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_int_WellNum ) void ;
  function DualMediaSetupPlateLookup( variable NumPlates, variable & barcodes, variable & Arrbarcodes[], variable & GoodFlag ) void ;
  function InitializeDBHelperLibrary( variable iExperimentID ) void ;
  function Liconic384PlateBarcode( variable & barcode384 ) void ;
  function PassagePlateLookup( variable NumPlates, variable & barcodes, variable & Arrbarcodes[] ) void ;
  function PlatesInLiconic( variable PlateType, variable InventoryType, variable & NumOfPlates ) void ;
  function RandomNumberInitialize(  ) void ;
  function SendCentrifugationEmail( variable username, variable subject, variable message, variable userdomain ) void ;
  function SetErrorEmailSettings( variable username, variable userdomain ) void ;
  function SetupPlateLookup( variable NumPlates, variable & barcodes, variable & Arrbarcodes[], variable & GoodFlag ) void ;
  function TerminalPlateLookup( variable NumPlates, variable & barcodes, variable & Arrbarcodes[], variable & GoodFlag ) void ;
  function TerminalSetupPlateLookup( variable NumPlates, variable & barcodes, variable & Arrbarcodes[], variable & GoodFlag ) void ;
  private function TranslateRowCoordinate( variable iRowNumber, variable & oRowAlpha ) void ;
  private function XAdd96wHitPickMap( variable i96wMapFile, variable irunNum ) void ;
  private function XAddOctetAutoDatatoDB( variable & arrOctetBarcode[], variable & arrOctetDataDir[], variable NumOctetPlates, variable octetDilFactor ) void ;
  private function XAddOctetAutoDatatoDB_ManualBatchQuant( variable & arrOctetBarcode[], variable & arrOctetDataDir[], variable NumOctetPlates, variable octetDilFactor ) void ;
  private function XAddOctetAutoDatatoDB_OctetV6( variable & arrOctetBarcode[], variable & arrOctetDataDir[], variable NumOctetPlates, variable octetDilFactor ) void ;
  private function XAddOctetDataToDB( variable iOctetInputFile, variable octetDilFactor ) void ;
  private function XAddOctetResultDataToDB_Auto( variable & arrOctetBarcode[], variable & arrOctetDataDir[], variable NumSamplePlates, variable octetDilFactor, variable SampleVesselType ) void ;
  private function XAddOctetRunDateToDB(  ) void ;
  private function XAddOctetTestPlatePipettingDatatoDB_Static( variable & iArrSampleTrackingFileNames[], variable & iArrCellCulturePlateBarcodes[], variable iDilution ) void ;
  private function XAddTfxnPlatePipettingDatatoDB( variable & iArrSampleTrackingFiles[], variable iCultureVolume, variable iMediaVolume ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function AddConfluenceDataToDB( variable iPlateBarcode, variable iWellID, variable iSampleVesselType, variable iConfluenceReading, variable iRandomNum ) void {
    private file WRITE_CELLAVISTA_CONFLUENCE_TABLE;
    private variable time;
    private variable date;
    private variable iResultType;
    private variable iResultUnits;
    private variable AssayType;
    private variable SampleID;
    private file WRITE_CELLAVISTA_RANDOM_NUM_TABLE;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    AssayType = "CellConfluence";
    SampleID = "NA";
    iResultType = "Confluence";
    iResultUnits = "%";
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.AddField("SampleID", SampleID, hslString, 255);
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.AddField("SampleBarcode", iPlateBarcode, hslString, 255);
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.AddField("SampleWell", iWellID, hslString, 255);
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.AddField("SampleVesselType", iSampleVesselType, hslString, 255);
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.AddField("AssayType", AssayType, hslString, 255);
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.AddField("Result", iConfluenceReading, hslFloat);
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.AddField("ResultType", iResultType, hslString, 255);
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.AddField("ResultUnits", iResultUnits, hslString, 255);
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.AddField("DateTime", date, hslString, 255);
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.SetDelimiter(";");
    if( 0 == WRITE_CELLAVISTA_CONFLUENCE_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 == WRITE_CELLAVISTA_CONFLUENCE_TABLE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != WRITE_CELLAVISTA_CONFLUENCE_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_CELLAVISTA_CONFLUENCE_TABLE.RemoveFields();
    iResultType = "RandomNum";
    iResultUnits = "NA";
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.AddField("SampleID", SampleID, hslString, 255);
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.AddField("SampleBarcode", iPlateBarcode, hslString, 255);
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.AddField("SampleWell", iWellID, hslString, 255);
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.AddField("SampleVesselType", iSampleVesselType, hslString, 255);
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.AddField("AssayType", AssayType, hslString, 255);
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.AddField("Result", iRandomNum, hslInteger);
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.AddField("ResultType", iResultType, hslString, 255);
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.AddField("ResultUnits", iResultUnits, hslString, 255);
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.AddField("DateTime", date, hslString, 255);
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.SetDelimiter(";");
    if( 0 == WRITE_CELLAVISTA_RANDOM_NUM_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 == WRITE_CELLAVISTA_RANDOM_NUM_TABLE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != WRITE_CELLAVISTA_RANDOM_NUM_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_CELLAVISTA_RANDOM_NUM_TABLE.RemoveFields();
  }

  function Add96wHitpickPipettingDataToDB( variable & iArrSampleTrackingFiles[], variable icultureVolume, variable imediaVolume, variable imediatype, variable imedialot, variable ProcessStep ) void {
    private variable targetPosID;
    private variable sourceBarcode;
    private variable targetBarcode;
    private variable arrSize;
    private variable arrIndex;
    private variable statusSummary;
    private file READ_SAMPLE_TRACKING_FILE;
    private variable date;
    private variable previousSourcePosID;
    private variable previousSourceBarcode;
    private variable previousTargetBarcode;
    private variable previousTargetPosID;
    private variable time;
    private variable sourcePosID;
    private variable totalVol;
    private variable SourceVesselType;
    private variable targetVesselType;
    private file WRITE_HITPICK_DATA;
    private variable SampleID;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    SourceVesselType = "96w";
    targetVesselType = "96DW";
    SampleID = "NA";
    totalVol = imediaVolume + icultureVolume;
    WRITE_HITPICK_DATA.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SampleID", SampleID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SourceBarcode", sourceBarcode, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SourceWell", sourcePosID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SourceVesselType", SourceVesselType, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DestinationBarcode", targetBarcode, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DestinationWell", targetPosID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DestinationVesselType", targetVesselType, hslString, 255);
    WRITE_HITPICK_DATA.AddField("TotalVol", totalVol, hslFloat);
    WRITE_HITPICK_DATA.AddField("SampleTransferVol", icultureVolume, hslFloat);
    WRITE_HITPICK_DATA.AddField("Reagent1Vol", imediaVolume, hslFloat);
    WRITE_HITPICK_DATA.AddField("Reagent1ID", imediatype, hslString, 255);
    WRITE_HITPICK_DATA.AddField("Reagent1Lot", imedialot, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DateTime", date, hslString, 255);
    WRITE_HITPICK_DATA.AddField("ProcessStep", ProcessStep, hslString, 255);
    WRITE_HITPICK_DATA.SetDelimiter(";");
    if( 0 == WRITE_HITPICK_DATA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [SampleTrackingTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    arrSize=iArrSampleTrackingFiles.GetSize();
    previousSourceBarcode = Translate("");
    previousTargetBarcode = Translate("");
    previousSourcePosID = Translate("");
    previousTargetPosID = Translate("");
    {
      for(arrIndex = 0; arrIndex < arrSize;)
      {
        arrIndex = arrIndex + 1;
        READ_SAMPLE_TRACKING_FILE.AddField("TRackBC", targetBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TPositionId", targetPosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SRackBC", sourceBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SPositionId", sourcePosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TSumStateDescription", statusSummary, hslString, 255);
        if( 0 == READ_SAMPLE_TRACKING_FILE.Open(iArrSampleTrackingFiles.ElementAt( arrIndex -1) + " " + "ReportMapping$", hslRead, "SELECT DISTINCT [SPositionId], [SRackBC], [TRackBC], [TPositionID], [TSumStateDescription] FROM [ReportMapping]") )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iArrSampleTrackingFiles.ElementAt( arrIndex -1), "HxMetEdCompCmd");
        }
        {
          while (
             (READ_SAMPLE_TRACKING_FILE.Eof() == 0)
          )
          {
            if( 0 == READ_SAMPLE_TRACKING_FILE.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (statusSummary != "Not used")
            {
              if (sourceBarcode != "----------")
              {
                if( 0 == WRITE_HITPICK_DATA.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
          }
        }
        if( 0 != READ_SAMPLE_TRACKING_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_SAMPLE_TRACKING_FILE.RemoveFields();
        HSLMapReport::DeleteFile(iArrSampleTrackingFiles.ElementAt( arrIndex -1));
      }
    }
    if( 0 != WRITE_HITPICK_DATA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_HITPICK_DATA.RemoveFields();
  }

  function InitializeDBHelperLibrary( variable iExperimentID ) void {
    private file CON_STRING_FILE;
    SampleTrackingDB_glExperimentID = iExperimentID;
    if(0){
      CON_STRING_FILE.AddField(1, SampleTrackingDB_glConnectionString, hslString);
      CON_STRING_FILE.SetDelimiter(hslAsciiText);
      if( 0 == CON_STRING_FILE.Open("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\MedImmuneDBConString_2008R2.txt", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\MedImmuneDBConString_2008R2.txt", "HxMetEdCompCmd");
      }
    }
    CON_STRING_FILE.AddField(1, SampleTrackingDB_glConnectionString, hslString);
    CON_STRING_FILE.SetDelimiter(hslAsciiText);
    if( 0 == CON_STRING_FILE.Open("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\MedImmuneDBConString_2014.txt", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\MedImmuneDBConString_2014.txt", "HxMetEdCompCmd");
    }
    if( 0 == CON_STRING_FILE.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != CON_STRING_FILE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    CON_STRING_FILE.RemoveFields();
    if(0){
      SampleTrackingDB_glDBName = Translate("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\MedImmuneSampleTrackingDB_2008R2_Data.mdf");
    }
    SampleTrackingDB_glDBName = Translate("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\MedImmuneSampleTrackingDB_2014_Data.mdf");
  }

  function AddCellDensityDataToDB( variable iTestPlateBarcode, variable iTestPlateWellID, variable iTotalCellDensity, variable iViableCellDensity, variable iViability ) void {
    private variable date;
    private variable time;
    private variable iTestPlateType;
    private variable SampleID;
    private variable AssayType;
    private file WRITE_CELLAVISTA_VIA_TABLE;
    private file WRITE_CELLAVISTA_VCD_TABLE;
    private file WRITE_CELLAVISTA_TCD_TABLE;
    private variable iResultType;
    private variable iResultUnits;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    iTestPlateType = "384w";
    AssayType = "CellViability_Hoechst-PI";
    SampleID = "NA";
    iResultUnits = "Num Total Cells";
    iResultType = "TCD";
    WRITE_CELLAVISTA_TCD_TABLE.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_CELLAVISTA_TCD_TABLE.AddField("SampleID", SampleID, hslString, 255);
    WRITE_CELLAVISTA_TCD_TABLE.AddField("DateTime", date, hslString, 255);
    WRITE_CELLAVISTA_TCD_TABLE.AddField("SampleBarcode", iTestPlateBarcode, hslString, 255);
    WRITE_CELLAVISTA_TCD_TABLE.AddField("SampleWell", iTestPlateWellID, hslString, 255);
    WRITE_CELLAVISTA_TCD_TABLE.AddField("SampleVesselType", iTestPlateType, hslString, 255);
    WRITE_CELLAVISTA_TCD_TABLE.AddField("AssayType", AssayType, hslString, 255);
    WRITE_CELLAVISTA_TCD_TABLE.AddField("Result", iTotalCellDensity, hslFloat);
    WRITE_CELLAVISTA_TCD_TABLE.AddField("ResultUnits", iResultUnits, hslString, 255);
    WRITE_CELLAVISTA_TCD_TABLE.AddField("ResultType", iResultType, hslString, 255);
    WRITE_CELLAVISTA_TCD_TABLE.SetDelimiter(";");
    if( 0 == WRITE_CELLAVISTA_TCD_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 == WRITE_CELLAVISTA_TCD_TABLE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != WRITE_CELLAVISTA_TCD_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_CELLAVISTA_TCD_TABLE.RemoveFields();
    iResultUnits = "Num Viable Cells";
    iResultType = "VCD";
    WRITE_CELLAVISTA_VCD_TABLE.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_CELLAVISTA_VCD_TABLE.AddField("SampleID", SampleID, hslString, 255);
    WRITE_CELLAVISTA_VCD_TABLE.AddField("DateTime", date, hslString, 255);
    WRITE_CELLAVISTA_VCD_TABLE.AddField("SampleBarcode", iTestPlateBarcode, hslString, 255);
    WRITE_CELLAVISTA_VCD_TABLE.AddField("SampleWell", iTestPlateWellID, hslString, 255);
    WRITE_CELLAVISTA_VCD_TABLE.AddField("SampleVesselType", iTestPlateType, hslString, 255);
    WRITE_CELLAVISTA_VCD_TABLE.AddField("AssayType", AssayType, hslString, 255);
    WRITE_CELLAVISTA_VCD_TABLE.AddField("Result", iViableCellDensity, hslFloat);
    WRITE_CELLAVISTA_VCD_TABLE.AddField("ResultUnits", iResultUnits, hslString, 255);
    WRITE_CELLAVISTA_VCD_TABLE.AddField("ResultType", iResultType, hslString, 255);
    WRITE_CELLAVISTA_VCD_TABLE.SetDelimiter(";");
    if( 0 == WRITE_CELLAVISTA_VCD_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 == WRITE_CELLAVISTA_VCD_TABLE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != WRITE_CELLAVISTA_VCD_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_CELLAVISTA_VCD_TABLE.RemoveFields();
    iResultUnits = "%";
    iResultType = "Viability";
    WRITE_CELLAVISTA_VIA_TABLE.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_CELLAVISTA_VIA_TABLE.AddField("SampleID", SampleID, hslString, 255);
    WRITE_CELLAVISTA_VIA_TABLE.AddField("DateTime", date, hslString, 255);
    WRITE_CELLAVISTA_VIA_TABLE.AddField("SampleBarcode", iTestPlateBarcode, hslString, 255);
    WRITE_CELLAVISTA_VIA_TABLE.AddField("SampleWell", iTestPlateWellID, hslString, 255);
    WRITE_CELLAVISTA_VIA_TABLE.AddField("SampleVesselType", iTestPlateType, hslString, 255);
    WRITE_CELLAVISTA_VIA_TABLE.AddField("AssayType", AssayType, hslString, 255);
    WRITE_CELLAVISTA_VIA_TABLE.AddField("Result", iViability, hslFloat);
    WRITE_CELLAVISTA_VIA_TABLE.AddField("ResultUnits", iResultUnits, hslString, 255);
    WRITE_CELLAVISTA_VIA_TABLE.AddField("ResultType", iResultType, hslString, 255);
    WRITE_CELLAVISTA_VIA_TABLE.SetDelimiter(";");
    if( 0 == WRITE_CELLAVISTA_VIA_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 == WRITE_CELLAVISTA_VIA_TABLE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != WRITE_CELLAVISTA_VIA_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_CELLAVISTA_VIA_TABLE.RemoveFields();
  }

  function AddCellDensityPipettingDataToDB( variable & iArrSampleTrackingFileNames[], variable & iArrCellCulturePlateBarcodes[], variable iSampleVol ) void {
    private variable targetPosID;
    private variable sourceBarcode;
    private variable targetBarcode;
    private variable sourcePosID;
    private variable date;
    private file WRITE_CELLAVISTA_PLATE_DATA;
    private variable arrSize;
    private variable fileIndex;
    private variable sourceLabID;
    private variable statusSummary;
    private file READ_SAMPLE_TRACKING_FILE;
    private variable time;
    private variable sqlStatement;
    private variable ProcessStep;
    private variable SourceVesselType;
    private variable SampleID;
    private variable targetVesselType;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    SourceVesselType = "96DW";
    targetVesselType = "384w";
    ProcessStep = "SuspensionCellCount";
    SampleID = "NA";
    WRITE_CELLAVISTA_PLATE_DATA.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_CELLAVISTA_PLATE_DATA.AddField("SampleID", SampleID, hslString, 255);
    WRITE_CELLAVISTA_PLATE_DATA.AddField("DateTime", date, hslString, 255);
    WRITE_CELLAVISTA_PLATE_DATA.AddField("DestinationBarcode", targetBarcode, hslString, 255);
    WRITE_CELLAVISTA_PLATE_DATA.AddField("DestinationWell", targetPosID, hslString, 255);
    WRITE_CELLAVISTA_PLATE_DATA.AddField("DestinationVesselType", targetVesselType, hslString, 255);
    WRITE_CELLAVISTA_PLATE_DATA.AddField("SourceBarcode", sourceBarcode, hslString, 255);
    WRITE_CELLAVISTA_PLATE_DATA.AddField("SourceWell", sourcePosID, hslString, 255);
    WRITE_CELLAVISTA_PLATE_DATA.AddField("SourceVesselType", SourceVesselType, hslString, 255);
    WRITE_CELLAVISTA_PLATE_DATA.AddField("SampleTransferVol", iSampleVol, hslFloat);
    WRITE_CELLAVISTA_PLATE_DATA.AddField("ProcessStep", ProcessStep, hslString, 255);
    WRITE_CELLAVISTA_PLATE_DATA.SetDelimiter(";");
    if( 0 == WRITE_CELLAVISTA_PLATE_DATA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [SampleTrackingTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    arrSize=iArrSampleTrackingFileNames.GetSize();
    {
      for(fileIndex = 0; fileIndex < arrSize;)
      {
        fileIndex = fileIndex + 1;
        sqlStatement = "SELECT DISTINCT [TRackBC], [TPositionId], [SLabwareId], [SPositionId], [TSumStateDescription]" +
        "FROM [ReportMapping]";
        READ_SAMPLE_TRACKING_FILE.AddField("TRackBC", targetBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TPositionId", targetPosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SLabwareId", sourceLabID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SPositionId", sourcePosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TSumStateDescription", statusSummary, hslString, 255);
        if( 0 == READ_SAMPLE_TRACKING_FILE.Open(iArrSampleTrackingFileNames.ElementAt( fileIndex -1) + " " + "ReportMapping$", hslRead, sqlStatement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iArrSampleTrackingFileNames.ElementAt( fileIndex -1), "HxMetEdCompCmd");
        }
        {
          while (
             (READ_SAMPLE_TRACKING_FILE.Eof() == 0)
          )
          {
            if( 0 == READ_SAMPLE_TRACKING_FILE.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (statusSummary != "Not used")
            {
              if ("TRackBC" != "----------")
              {
                if (sourceLabID == "SamplingA_1")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(1-1);
                }
                if (sourceLabID == "SamplingA_2")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(2-1);
                }
                if (sourceLabID == "SamplingA_3")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(3-1);
                }
                if (sourceLabID == "SamplingA_4")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(4-1);
                }
                if( 0 == WRITE_CELLAVISTA_PLATE_DATA.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
          }
        }
        if( 0 != READ_SAMPLE_TRACKING_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_SAMPLE_TRACKING_FILE.RemoveFields();
        HSLMapReport::DeleteFile(iArrSampleTrackingFileNames.ElementAt( fileIndex -1));
      }
    }
    if( 0 != WRITE_CELLAVISTA_PLATE_DATA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_CELLAVISTA_PLATE_DATA.RemoveFields();
  }

  private function XAddOctetRunDateToDB(  ) void {
    private variable sqlStatement;
    private variable date;
    private file UPDATE_EXPERIMENT_INFO_TABLE;
    private variable time;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    sqlStatement = StrConcat8(Translate("UPDATE [ExperimentInfoTable] SET [OctetMeasurementDate] = '"), date, Translate("' WHERE [ExperimentID] = '"), SampleTrackingDB_glExperimentID, Translate("'"), Translate(""), Translate(""), Translate(""));
    UPDATE_EXPERIMENT_INFO_TABLE.SetDelimiter(";");
    if( 0 == UPDATE_EXPERIMENT_INFO_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, sqlStatement, SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 != UPDATE_EXPERIMENT_INFO_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    UPDATE_EXPERIMENT_INFO_TABLE.RemoveFields();
  }

  private function XAddOctetDataToDB( variable iOctetInputFile, variable octetDilFactor ) void {
    private variable row;
    private variable titerColumn;
    private variable posID;
    private variable sheetCounter;
    private variable positionColumn;
    private variable proteinTiter;
    private variable readCounter;
    private variable sheetNumber;
    private variable octetPlateBarcode;
    private file WRITE_OCTET_DATA_TO_DB;
    private variable proteinTiterDil;
    private variable proteinTiterDil2;
    private variable time;
    private variable date;
    private variable sheetname;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    WRITE_OCTET_DATA_TO_DB.AddField("experimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("OctetTestPlateBarcode", octetPlateBarcode, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("OctetTestPlateWellID", posID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("ProteinTiter", proteinTiter, hslFloat);
    WRITE_OCTET_DATA_TO_DB.AddField("Date", date, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("RunID", SampleTrackingDB_glRunID, hslInteger);
    WRITE_OCTET_DATA_TO_DB.SetDelimiter(";");
    if( 0 == WRITE_OCTET_DATA_TO_DB.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [OctetReadDataTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    positionColumn = 15;
    titerColumn = 20;
    MicrosoftExcel::Init();
    MicrosoftExcel::OpenFile(iOctetInputFile);
    MicrosoftExcel::GetSheetCount(sheetNumber);
    {
      for(sheetCounter = 0; sheetCounter < sheetNumber;)
      {
        sheetCounter = sheetCounter + 1;
        MicrosoftExcel::SelectSheet(sheetCounter);
        MicrosoftExcel::GetSheetName(octetPlateBarcode);
        if (octetPlateBarcode != "Ini File")
        {
          sheetname = StrLeft(octetPlateBarcode, 5);
          if (sheetname != "Sheet")
          {
            row = 40;
            {
              for(readCounter = 0; readCounter < 96;)
              {
                readCounter = readCounter + 1;
                MicrosoftExcel::GetCellValue(positionColumn, row, posID);
                MicrosoftExcel::GetCellValue(titerColumn, row, proteinTiterDil2);
                proteinTiterDil = StrFVal(proteinTiterDil2);
                proteinTiter = octetDilFactor * proteinTiterDil;
                if( 0 == WRITE_OCTET_DATA_TO_DB.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                row = row + 1;
              }
            }
          }
        }
      }
    }
    MicrosoftExcel::End();
    if( 0 != WRITE_OCTET_DATA_TO_DB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_OCTET_DATA_TO_DB.RemoveFields();
  }

  function Add24WellPlatePipettingDataToDB( variable & iArrSampleTrackingFiles[], variable iCultureVolume, variable iMediaVolume, variable imediatype, variable imedialot ) void {
    private variable previousSourcePosID;
    private variable arrSize;
    private variable previousSourceBarcode;
    private variable previousTargetBarcode;
    private variable targetPosID;
    private variable previousTargetPosID;
    private variable arrIndex;
    private variable scourcePosID;
    private variable statusSummary;
    private variable sourceBarcode;
    private variable targetBarcode;
    private variable date;
    private file READ_SAMPLE_TRACKING_FILE;
    private file WRITE_HITPICK_DATA;
    private variable time;
    private variable ProcessStep;
    private variable SourceVesselType;
    private variable totalvol;
    private variable targetVesselType;
    private variable SampleID;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    SourceVesselType = "96DW";
    targetVesselType = "24DW";
    ProcessStep = "24DW_ScaleUp";
    SampleID = "NA";
    totalvol = iMediaVolume + iCultureVolume;
    WRITE_HITPICK_DATA.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SampleID", SampleID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SourceBarcode", sourceBarcode, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SourceWell", scourcePosID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SourceVesselType", SourceVesselType, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DestinationBarcode", targetBarcode, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DestinationWell", targetPosID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DestinationVesselType", targetVesselType, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DateTime", date, hslString, 255);
    WRITE_HITPICK_DATA.AddField("TotalVol", totalvol, hslFloat);
    WRITE_HITPICK_DATA.AddField("SampleTransferVol", iCultureVolume, hslFloat);
    WRITE_HITPICK_DATA.AddField("Reagent1Vol", iMediaVolume, hslFloat);
    WRITE_HITPICK_DATA.AddField("Reagent1ID", imediatype, hslString, 255);
    WRITE_HITPICK_DATA.AddField("Reagent1Lot", imedialot, hslString, 255);
    WRITE_HITPICK_DATA.AddField("ProcessStep", ProcessStep, hslString, 255);
    WRITE_HITPICK_DATA.SetDelimiter(";");
    if( 0 == WRITE_HITPICK_DATA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [SampleTrackingTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    arrSize=iArrSampleTrackingFiles.GetSize();
    previousSourceBarcode = Translate("");
    previousTargetBarcode = Translate("");
    previousSourcePosID = Translate("");
    previousTargetPosID = Translate("");
    {
      for(arrIndex = 0; arrIndex < arrSize;)
      {
        arrIndex = arrIndex + 1;
        READ_SAMPLE_TRACKING_FILE.AddField("TRackBC", targetBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TPositionId", targetPosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SRackBC", sourceBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SPositionId", scourcePosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TSumStateDescription", statusSummary, hslString, 255);
        if( 0 == READ_SAMPLE_TRACKING_FILE.Open(iArrSampleTrackingFiles.ElementAt( arrIndex -1) + " " + "ReportMapping$", hslRead, "SELECT DISTINCT [SPositionId], [SRackBC], [TRackBC], [TPositionID], [TSumStateDescription] FROM [ReportMapping]") )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iArrSampleTrackingFiles.ElementAt( arrIndex -1), "HxMetEdCompCmd");
        }
        {
          while (
             (READ_SAMPLE_TRACKING_FILE.Eof() == 0)
          )
          {
            if( 0 == READ_SAMPLE_TRACKING_FILE.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (statusSummary != "Not used")
            {
              if (sourceBarcode != "----------")
              {
                if( 0 == WRITE_HITPICK_DATA.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
          }
        }
        if( 0 != READ_SAMPLE_TRACKING_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_SAMPLE_TRACKING_FILE.RemoveFields();
        HSLMapReport::DeleteFile(iArrSampleTrackingFiles.ElementAt( arrIndex -1));
      }
    }
    if( 0 != WRITE_HITPICK_DATA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_HITPICK_DATA.RemoveFields();
  }

  function AddOctetTestPlatePipettingDatatoDB( variable & iArrSampleTrackingFileNames[], variable & iArrCellCulturePlateBarcodes[], variable iDiluentName, variable iDiluentLot, variable iSampleVol, variable TotalVol ) void {
    private variable arrSize;
    private variable fileIndex;
    private variable targetPosID;
    private variable sourceLabID;
    private variable statusSummary;
    private variable sourceBarcode;
    private variable targetBarcode;
    private variable date;
    private variable sourcePosID;
    private file WRITE_OCTET_PLATE_DATA;
    private file READ_SAMPLE_TRACKING_FILE;
    private variable time;
    private variable sqlStatement;
    private variable ProcessStep;
    private variable SourceVesselType;
    private variable SampleID;
    private variable iDiluentVol;
    private variable DestinationVesselType;
    WRITE_OCTET_PLATE_DATA.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("SampleID", SampleID, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("DateTime", date, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("DestinationBarcode", targetBarcode, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("DestinationWell", targetPosID, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("DestinationVesselType", DestinationVesselType, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("SourceBarcode", sourceBarcode, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("SourceWell", sourcePosID, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("SourceVesselType", SourceVesselType, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("TotalVol", TotalVol, hslFloat);
    WRITE_OCTET_PLATE_DATA.AddField("SampleTransferVol", iSampleVol, hslFloat);
    WRITE_OCTET_PLATE_DATA.AddField("Reagent1Vol", iDiluentVol, hslFloat);
    WRITE_OCTET_PLATE_DATA.AddField("Reagent1ID", iDiluentName, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("Reagent1Lot", iDiluentLot, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("ProcessStep", ProcessStep, hslString, 255);
    WRITE_OCTET_PLATE_DATA.SetDelimiter(";");
    if( 0 == WRITE_OCTET_PLATE_DATA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [SampleTrackingTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    SourceVesselType = "96DW";
    DestinationVesselType = "384w_Octet";
    ProcessStep = "Octet_ProteinA";
    SampleID = "NA";
    arrSize=iArrSampleTrackingFileNames.GetSize();
    {
      for(fileIndex = 0; fileIndex < arrSize;)
      {
        fileIndex = fileIndex + 1;
        sqlStatement = "SELECT DISTINCT [TRackBC], [TPositionId], [SLabwareId], [SPositionId], [TSumStateDescription]" +
        "FROM [ReportMapping]";
        READ_SAMPLE_TRACKING_FILE.AddField("TRackBC", targetBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TPositionId", targetPosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SLabwareId", sourceLabID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SPositionId", sourcePosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TSumStateDescription", statusSummary, hslString, 255);
        if( 0 == READ_SAMPLE_TRACKING_FILE.Open(iArrSampleTrackingFileNames.ElementAt( fileIndex -1) + " " + "ReportMapping$", hslRead, sqlStatement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iArrSampleTrackingFileNames.ElementAt( fileIndex -1), "HxMetEdCompCmd");
        }
        {
          while (
             (READ_SAMPLE_TRACKING_FILE.Eof() == 0)
          )
          {
            if( 0 == READ_SAMPLE_TRACKING_FILE.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (statusSummary != "Not used")
            {
              if ("TRackBC" != "----------")
              {
                if (sourceLabID == "SamplingA_1")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(1-1);
                }
                if (sourceLabID == "SamplingA_2")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(2-1);
                }
                if (sourceLabID == "SamplingA_3")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(3-1);
                }
                if (sourceLabID == "SamplingA_4")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(4-1);
                }
                if( 0 == WRITE_OCTET_PLATE_DATA.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
          }
        }
        if( 0 != READ_SAMPLE_TRACKING_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_SAMPLE_TRACKING_FILE.RemoveFields();
        HSLMapReport::DeleteFile(iArrSampleTrackingFileNames.ElementAt( fileIndex -1));
      }
    }
    if( 0 != WRITE_OCTET_PLATE_DATA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_OCTET_PLATE_DATA.RemoveFields();
  }

  function AddParentalLocationDataToDB( variable iParentalID, variable iCulturePlateBarcode, variable iCulturePlateWellID, variable iPlateType ) void {
    private file WRITE_PARENTAL_DATA_TABLE;
    private variable time;
    private variable date;
    WRITE_PARENTAL_DATA_TABLE.AddField("ParentalID", iParentalID, hslString, 255);
    WRITE_PARENTAL_DATA_TABLE.AddField("Date", date, hslString, 255);
    WRITE_PARENTAL_DATA_TABLE.AddField("PlateBarcode", iCulturePlateBarcode, hslString, 255);
    WRITE_PARENTAL_DATA_TABLE.AddField("WellID", iCulturePlateWellID, hslString, 255);
    WRITE_PARENTAL_DATA_TABLE.AddField("experimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_PARENTAL_DATA_TABLE.AddField("PlateID", iPlateType, hslString, 255);
    WRITE_PARENTAL_DATA_TABLE.SetDelimiter(";");
    if( 0 == WRITE_PARENTAL_DATA_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [ParentalTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    if( 0 == WRITE_PARENTAL_DATA_TABLE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != WRITE_PARENTAL_DATA_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_PARENTAL_DATA_TABLE.RemoveFields();
  }

  private function TranslateRowCoordinate( variable iRowNumber, variable & oRowAlpha ) void {
    oRowAlpha = 0;
    if (iRowNumber == 1)
    {
      oRowAlpha = Translate("A");
    }
    if (iRowNumber == 2)
    {
      oRowAlpha = Translate("B");
    }
    if (iRowNumber == 3)
    {
      oRowAlpha = Translate("C");
    }
    if (iRowNumber == 4)
    {
      oRowAlpha = Translate("D");
    }
    if (iRowNumber == 5)
    {
      oRowAlpha = Translate("E");
    }
    if (iRowNumber == 6)
    {
      oRowAlpha = Translate("F");
    }
    if (iRowNumber == 7)
    {
      oRowAlpha = Translate("G");
    }
    if (iRowNumber == 8)
    {
      oRowAlpha = Translate("H");
    }
  }

  private function XAdd96wHitPickMap( variable i96wMapFile, variable irunNum ) void {
    private variable pick;
    private variable row;
    private variable realrow;
    private variable sheetCounter;
    private variable posID;
    private variable col;
    private variable realcol;
    private variable readCounter;
    private variable loopCounter4;
    private variable pick2;
    private variable sheetNumber;
    private variable rowAlpha;
    private variable transfectionBarcode;
    private file WRITE_TFXN96W_DATA_TO_DB;
    WRITE_TFXN96W_DATA_TO_DB.AddField("experimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_TFXN96W_DATA_TO_DB.AddField("runNum", irunNum, hslInteger);
    WRITE_TFXN96W_DATA_TO_DB.AddField("Transfection96wBarcode", transfectionBarcode, hslString, 255);
    WRITE_TFXN96W_DATA_TO_DB.AddField("Transfection96wWellID", posID, hslString, 255);
    WRITE_TFXN96W_DATA_TO_DB.AddField("Pick", pick, hslInteger);
    WRITE_TFXN96W_DATA_TO_DB.AddField("RunID", SampleTrackingDB_glRunID, hslInteger);
    WRITE_TFXN96W_DATA_TO_DB.SetDelimiter(";");
    if( 0 == WRITE_TFXN96W_DATA_TO_DB.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [Transfection96wTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    MicrosoftExcel::Init();
    MicrosoftExcel::OpenFile(i96wMapFile);
    MicrosoftExcel::GetSheetCount(sheetNumber);
    {
      for(sheetCounter = 0; sheetCounter < sheetNumber;)
      {
        sheetCounter = sheetCounter + 1;
        MicrosoftExcel::SelectSheet(sheetCounter);
        MicrosoftExcel::GetSheetName(transfectionBarcode);
        col = 2;
        {
          for(readCounter = 0; readCounter < 12;)
          {
            readCounter = readCounter + 1;
            row = 2;
            {
              for(loopCounter4 = 0; loopCounter4 < 8;)
              {
                loopCounter4 = loopCounter4 + 1;
                MicrosoftExcel::GetCellValue(col, row, pick2);
                pick = StrFVal(pick2);
                realrow = row - 1;
                realcol = col - 1;
                TranslateRowCoordinate(realrow, rowAlpha);
                posID = StrConcat2(rowAlpha, realcol);
                if( 0 == WRITE_TFXN96W_DATA_TO_DB.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                row = row + 1;
              }
            }
            col = col + 1;
          }
        }
      }
    }
    MicrosoftExcel::End();
    if( 0 != WRITE_TFXN96W_DATA_TO_DB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_TFXN96W_DATA_TO_DB.RemoveFields();
  }

  private function XAddTfxnPlatePipettingDatatoDB( variable & iArrSampleTrackingFiles[], variable iCultureVolume, variable iMediaVolume ) void {
    private variable previousSourcePosID;
    private variable arrSize;
    private variable previousSourceBarcode;
    private variable sqlStatement;
    private variable previousTargetBarcode;
    private variable targetPosID;
    private variable previousTargetPosID;
    private variable arrIndex;
    private variable scourcePosID;
    private variable statusSummary;
    private variable sourceBarcode;
    private variable targetBarcode;
    private variable time;
    private variable date;
    private file UPDATE_EXPERIMENT_INFO_TABLE;
    private file READ_SAMPLE_TRACKING_FILE;
    private file WRITE_HITPICK_DATA;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    sqlStatement = StrConcat8(Translate("UPDATE [ExperimentInfoTable] SET [TfxnPlateRunDate] = '"), date, Translate("' WHERE [ExperimentID] = '"), SampleTrackingDB_glExperimentID, Translate("'"), Translate(""), Translate(""), Translate(""));
    UPDATE_EXPERIMENT_INFO_TABLE.SetDelimiter(";");
    if( 0 == UPDATE_EXPERIMENT_INFO_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, sqlStatement, SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 != UPDATE_EXPERIMENT_INFO_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    UPDATE_EXPERIMENT_INFO_TABLE.RemoveFields();
    WRITE_HITPICK_DATA.AddField("experimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("TfxnPlateBarcode", sourceBarcode, hslString, 255);
    WRITE_HITPICK_DATA.AddField("TfxnPlateWellID", scourcePosID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("ClonePixBarcode", targetBarcode, hslString, 255);
    WRITE_HITPICK_DATA.AddField("ClonePixWellID", targetPosID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("CultureVolume", iCultureVolume, hslString, 255);
    WRITE_HITPICK_DATA.AddField("MediaVolume", iMediaVolume, hslString, 255);
    WRITE_HITPICK_DATA.AddField("Date", date, hslString, 255);
    WRITE_HITPICK_DATA.AddField("RunID", SampleTrackingDB_glRunID, hslInteger);
    WRITE_HITPICK_DATA.SetDelimiter(";");
    if( 0 == WRITE_HITPICK_DATA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [TfxnPlateCultureTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    arrSize=iArrSampleTrackingFiles.GetSize();
    previousSourceBarcode = Translate("");
    previousTargetBarcode = Translate("");
    previousSourcePosID = Translate("");
    previousTargetPosID = Translate("");
    {
      for(arrIndex = 0; arrIndex < arrSize;)
      {
        arrIndex = arrIndex + 1;
        READ_SAMPLE_TRACKING_FILE.AddField("TRackBC", targetBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TPositionId", targetPosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SRackBC", sourceBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SPositionId", scourcePosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TSumStateDescription", statusSummary, hslString, 255);
        if( 0 == READ_SAMPLE_TRACKING_FILE.Open(iArrSampleTrackingFiles.ElementAt( arrIndex -1) + " " + "ReportMapping$", hslRead, "SELECT DISTINCT [SPositionId], [SRackBC], [TRackBC], [TPositionID], [TSumStateDescription] FROM [ReportMapping]") )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iArrSampleTrackingFiles.ElementAt( arrIndex -1), "HxMetEdCompCmd");
        }
        {
          while (
             (READ_SAMPLE_TRACKING_FILE.Eof() == 0)
          )
          {
            if( 0 == READ_SAMPLE_TRACKING_FILE.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (statusSummary != "Not used")
            {
              if (sourceBarcode != "----------")
              {
                if( 0 == WRITE_HITPICK_DATA.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
          }
        }
        if( 0 != READ_SAMPLE_TRACKING_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_SAMPLE_TRACKING_FILE.RemoveFields();
        HSLMapReport::DeleteFile(iArrSampleTrackingFiles.ElementAt( arrIndex -1));
      }
    }
    if( 0 != WRITE_HITPICK_DATA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_HITPICK_DATA.RemoveFields();
  }

  private function XAddOctetTestPlatePipettingDatatoDB_Static( variable & iArrSampleTrackingFileNames[], variable & iArrCellCulturePlateBarcodes[], variable iDilution ) void {
    private variable arrSize;
    private variable fileIndex;
    private variable targetPosID;
    private variable sourceLabID;
    private variable sourceBarcode;
    private variable statusSummary;
    private variable targetBarcode;
    private variable time;
    private variable sourcePosID;
    private variable date;
    private file WRITE_OCTET_PLATE_DATA;
    private file READ_SAMPLE_TRACKING_FILE;
    private variable sqlStatement;
    WRITE_OCTET_PLATE_DATA.AddField("experimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("Date", date, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("TestPlateBarcode", targetBarcode, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("TestPlateWellID", targetPosID, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("CulturePlateBarcode", sourceBarcode, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("CulturePlateWellID", sourcePosID, hslString, 255);
    WRITE_OCTET_PLATE_DATA.AddField("Dilution", iDilution, hslFloat);
    WRITE_OCTET_PLATE_DATA.AddField("RunID", SampleTrackingDB_glRunID, hslInteger);
    WRITE_OCTET_PLATE_DATA.SetDelimiter(";");
    if( 0 == WRITE_OCTET_PLATE_DATA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [OctetTestPlateTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    arrSize=iArrSampleTrackingFileNames.GetSize();
    {
      for(fileIndex = 0; fileIndex < arrSize;)
      {
        fileIndex = fileIndex + 1;
        sqlStatement = "SELECT DISTINCT [TRackBC], [TPositionId], [SLabwareId], [SPositionId], [TSumStateDescription]" +
        "FROM [ReportMapping]";
        READ_SAMPLE_TRACKING_FILE.AddField("TRackBC", targetBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TPositionId", targetPosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SLabwareId", sourceLabID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SPositionId", sourcePosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TSumStateDescription", statusSummary, hslString, 255);
        if( 0 == READ_SAMPLE_TRACKING_FILE.Open(iArrSampleTrackingFileNames.ElementAt( fileIndex -1) + " " + "ReportMapping$", hslRead, sqlStatement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iArrSampleTrackingFileNames.ElementAt( fileIndex -1), "HxMetEdCompCmd");
        }
        {
          while (
             (READ_SAMPLE_TRACKING_FILE.Eof() == 0)
          )
          {
            if( 0 == READ_SAMPLE_TRACKING_FILE.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (statusSummary != "Not used")
            {
              if ("TRackBC" != "----------")
              {
                if (sourceLabID == "GreinerCellstar_1")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(1-1);
                }
                if (sourceLabID == "GreinerCellstar_2")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(2-1);
                }
                if (sourceLabID == "GreinerCellstar_3")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(3-1);
                }
                if (sourceLabID == "GreinerCellstar_4")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(4-1);
                }
                if (sourceLabID == "GreinerCellstar_5")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(5-1);
                }
                if (sourceLabID == "GreinerCellstar_6")
                {
                  sourceBarcode=iArrCellCulturePlateBarcodes.GetAt(6-1);
                }
                if( 0 == WRITE_OCTET_PLATE_DATA.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
          }
        }
        if( 0 != READ_SAMPLE_TRACKING_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_SAMPLE_TRACKING_FILE.RemoveFields();
        HSLMapReport::DeleteFile(iArrSampleTrackingFileNames.ElementAt( fileIndex -1));
      }
    }
    if( 0 != WRITE_OCTET_PLATE_DATA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_OCTET_PLATE_DATA.RemoveFields();
  }

  function RandomNumberInitialize(  ) void {
    private variable num;
    private variable date2;
    private variable time2;
    private variable letter;
    private variable length;
    private variable loopCounter1;
    private variable ascii;
    date2 = TimGetFormattedDate(Translate("%m/%d/%y "));
    time2 = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date2 = date2 + time2;
    length = StrGetLength(date2);
    if(0){
      TrcTrace(Translate("Length: "), length);
    }
    num = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < length;)
      {
        loopCounter1 = loopCounter1 + 1;
        letter = StrMid(date2, loopCounter1, 1);
        ascii = StrStrToAscii(letter);
        if(0){
          TrcTrace(Translate("Ascii: "), ascii);
        }
        num = num + ascii;
      }
    }
    MthR01Init(2147483399, 40692, num);
  }

  function AddPassagePlatePipettingDataToDB( variable & iArrSampleTrackingFiles[], variable & iCultureVolume[], variable & iMediaVolume[], variable & iTargetCellDensity[], variable & iTargetViaCellDensity[], variable & iTargetViability[], variable iDWPsThisTime, variable & iArrBarcodesPassagePlates[], variable iMediaType, variable iMediaLot ) void {
    private variable volumeCounter;
    private variable targetPosID;
    private variable statusSummary;
    private variable sourceBarcode;
    private variable cultureVolume;
    private variable targetBarcode;
    private variable time;
    private variable sourcePosID;
    private variable mediaVolume;
    private variable date;
    private file READ_TRACKING_FILE;
    private file WRITE_PASSAGE_PLATE_DATA;
    private variable PlateBarcode;
    private variable PlateNumber;
    private variable sqlStatement;
    private variable row;
    private variable PlateColID;
    private variable PlatePosID;
    private variable loopCounter1;
    private variable loopCounter5;
    private variable rowAlpha;
    private variable sqlone;
    private variable TotalVol;
    private variable SourceVesselType;
    private variable SampleID;
    private variable targetVesselType;
    private variable ProcessStep;
    private variable TCD;
    private variable VCD;
    private variable Viabillity;
    private variable ResultType;
    private variable AssayType;
    private variable ResultUnits;
    private file WRITE_PASSAGE_PLATE_ANALYTICS_TCD;
    private file WRITE_PASSAGE_PLATE_ANALYTICS_VCD;
    private file WRITE_PASSAGE_PLATE_ANALYTICS_VIA;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    SourceVesselType = "96DW";
    targetVesselType = "96DW";
    ProcessStep = "96DW_Passage";
    SampleID = "NA";
    AssayType = "Passage_Seeding_Target";
    volumeCounter = 1;
    WRITE_PASSAGE_PLATE_DATA.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.AddField("SampleID", SampleID, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.AddField("DateTime", date, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.AddField("DestinationBarcode", targetBarcode, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.AddField("SourceBarcode", sourceBarcode, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.AddField("SourceWell", sourcePosID, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.AddField("SourceVesselType", SourceVesselType, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.AddField("DestinationWell", targetPosID, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.AddField("DestinationVesselType", targetVesselType, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.AddField("TotalVol", TotalVol, hslFloat);
    WRITE_PASSAGE_PLATE_DATA.AddField("SampleTransferVol", cultureVolume, hslFloat);
    WRITE_PASSAGE_PLATE_DATA.AddField("Reagent1Vol", mediaVolume, hslFloat);
    WRITE_PASSAGE_PLATE_DATA.AddField("Reagent1ID", iMediaType, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.AddField("Reagent1Lot", iMediaLot, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.AddField("ProcessStep", ProcessStep, hslString, 255);
    WRITE_PASSAGE_PLATE_DATA.SetDelimiter(";");
    if( 0 == WRITE_PASSAGE_PLATE_DATA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [SampleTrackingTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.AddField("SampleID", SampleID, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.AddField("DateTime", date, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.AddField("SampleBarcode", targetBarcode, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.AddField("SampleWell", targetPosID, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.AddField("SampleVesselType", targetVesselType, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.AddField("Result", TCD, hslFloat);
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.AddField("ResultUnits", ResultUnits, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.AddField("ResultType", ResultType, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.AddField("AssayType", AssayType, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.SetDelimiter(";");
    if( 0 == WRITE_PASSAGE_PLATE_ANALYTICS_TCD.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.AddField("SampleID", SampleID, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.AddField("DateTime", date, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.AddField("SampleBarcode", targetBarcode, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.AddField("SampleWell", targetPosID, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.AddField("SampleVesselType", targetVesselType, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.AddField("Result", VCD, hslFloat);
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.AddField("ResultUnits", ResultUnits, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.AddField("ResultType", ResultType, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.AddField("AssayType", AssayType, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.SetDelimiter(";");
    if( 0 == WRITE_PASSAGE_PLATE_ANALYTICS_VCD.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.AddField("SampleID", SampleID, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.AddField("DateTime", date, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.AddField("SampleBarcode", targetBarcode, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.AddField("SampleWell", targetPosID, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.AddField("SampleVesselType", targetVesselType, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.AddField("Result", Viabillity, hslFloat);
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.AddField("ResultUnits", ResultUnits, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.AddField("ResultType", ResultType, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.AddField("AssayType", AssayType, hslString, 255);
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.SetDelimiter(";");
    if( 0 == WRITE_PASSAGE_PLATE_ANALYTICS_VIA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    {
      for(PlateNumber = 0; PlateNumber < iDWPsThisTime;)
      {
        PlateNumber = PlateNumber + 1;
        row = 1;
        PlateColID = 1;
        PlateBarcode=iArrBarcodesPassagePlates.GetAt(PlateNumber-1);
        {
          for(loopCounter5 = 0; loopCounter5 < 12;)
          {
            loopCounter5 = loopCounter5 + 1;
            {
              for(loopCounter1 = 0; loopCounter1 < 8;)
              {
                loopCounter1 = loopCounter1 + 1;
                TranslateRowCoordinate(row, rowAlpha);
                PlatePosID = StrConcat2(rowAlpha, PlateColID);
                sqlone = Translate("SELECT DISTINCT [SPositionId], [SRackBC], [TRackBC], [TPositionID], [TSumStateDescription] FROM [ReportMapping] WHERE [TRackBC] = '");
                sqlStatement = StrConcat8(sqlone, PlateBarcode, Translate("' AND [TPositionID] = '"), PlatePosID, Translate("'"), Translate(""), Translate(""), Translate(""));
                READ_TRACKING_FILE.AddField("TRackBC", targetBarcode, hslString, 255);
                READ_TRACKING_FILE.AddField("TPositionId", targetPosID, hslString, 255);
                READ_TRACKING_FILE.AddField("SRackBC", sourceBarcode, hslString, 255);
                READ_TRACKING_FILE.AddField("SPositionId", sourcePosID, hslString, 255);
                READ_TRACKING_FILE.AddField("TSumStateDescription", statusSummary, hslString, 255);
                if( 0 == READ_TRACKING_FILE.Open(iArrSampleTrackingFiles.ElementAt( PlateNumber -1) + " " + "ReportMapping$", hslRead, sqlStatement) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iArrSampleTrackingFiles.ElementAt( PlateNumber -1), "HxMetEdCompCmd");
                }
                if( 0 == READ_TRACKING_FILE.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (statusSummary != "Not used")
                {
                  if (sourceBarcode != "----------")
                  {
                    cultureVolume = iCultureVolume.ElementAt( volumeCounter -1);
                    mediaVolume = iMediaVolume.ElementAt( volumeCounter -1);
                    TotalVol = mediaVolume + cultureVolume;
                    TCD = iTargetCellDensity.ElementAt( volumeCounter -1);
                    VCD = iTargetViaCellDensity.ElementAt( volumeCounter -1);
                    Viabillity = iTargetViability.ElementAt( volumeCounter -1);
                    volumeCounter = volumeCounter + 1;
                    if( 0 == WRITE_PASSAGE_PLATE_DATA.WriteRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    ResultUnits = "Num Total Cells";
                    ResultType = "TCD";
                    if( 0 == WRITE_PASSAGE_PLATE_ANALYTICS_TCD.WriteRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    ResultUnits = "Num Viable Cells";
                    ResultType = "VCD";
                    if( 0 == WRITE_PASSAGE_PLATE_ANALYTICS_VCD.WriteRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    ResultUnits = "Viability";
                    ResultType = "%";
                    if( 0 == WRITE_PASSAGE_PLATE_ANALYTICS_VIA.WriteRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                  }
                }
                if( 0 != READ_TRACKING_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                READ_TRACKING_FILE.RemoveFields();
                if (row < 8)
                {
                  row = row + 1;
                }
                else
                {
                  row = 1;
                }
              }
            }
            if (PlateColID < 12)
            {
              PlateColID = PlateColID + 1;
            }
            else
            {
              PlateColID = 1;
            }
          }
        }
        HSLMapReport::DeleteFile(iArrSampleTrackingFiles.ElementAt( PlateNumber -1));
      }
    }
    if( 0 != WRITE_PASSAGE_PLATE_DATA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_PASSAGE_PLATE_DATA.RemoveFields();
    if( 0 != WRITE_PASSAGE_PLATE_ANALYTICS_TCD.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_PASSAGE_PLATE_ANALYTICS_TCD.RemoveFields();
    if( 0 != WRITE_PASSAGE_PLATE_ANALYTICS_VCD.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_PASSAGE_PLATE_ANALYTICS_VCD.RemoveFields();
    if( 0 != WRITE_PASSAGE_PLATE_ANALYTICS_VIA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_PASSAGE_PLATE_ANALYTICS_VIA.RemoveFields();
  }

  function AddTerminalPlatePipettingDataToDB( variable & iArrSampleTrackingFiles[], variable & iCultureVolume[], variable & iMediaVolume[], variable & iTargetCellDensity[], variable & iTargetViaCellDensity[], variable & iTargetViability[], variable iDWPsThisTime, variable & iArrBarcodesTerminalPlates[], variable iMediaType, variable iMediaLot ) void {
    private variable PlateNumber;
    private variable PlateBarcode;
    private variable sqlStatement;
    private variable row;
    private variable volumeCounter;
    private variable targetPosID;
    private variable PlateColID;
    private variable sqlone;
    private variable loopCounter1;
    private variable PlatePosID;
    private variable statusSummary;
    private variable sourceBarcode;
    private variable targetBarcode;
    private variable cultureVolume;
    private variable loopCounter5;
    private variable time;
    private variable rowAlpha;
    private variable sourcePosID;
    private variable mediaVolume;
    private variable date;
    private file READ_TRACKING_FILE;
    private file WRITE_TERMINAL_PLATE_DATA;
    private variable ProcessStep;
    private variable SourceVesselType;
    private variable TCD;
    private variable VCD;
    private variable SampleID;
    private variable ResultType;
    private variable AssayType;
    private variable ResultUnits;
    private variable targetVesselType;
    private variable Viabillity;
    private file WRITE_TERMINAL_PLATE_ANALYTICS_VCD;
    private file WRITE_TERMINAL_PLATE_ANALYTICS_VIA;
    private file WRITE_TERMINAL_PLATE_ANALYTICS_TCD;
    private variable TotalVol;
    private dialog dialogHandle_1;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    SourceVesselType = "96DW";
    targetVesselType = "96DW";
    ProcessStep = "96DW_Terminal_Setup";
    SampleID = "NA";
    AssayType = "Terminal_Seeding_Target";
    volumeCounter = 1;
    WRITE_TERMINAL_PLATE_DATA.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.AddField("SampleID", SampleID, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.AddField("DateTime", date, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.AddField("DestinationBarcode", targetBarcode, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.AddField("SourceBarcode", sourceBarcode, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.AddField("SourceWell", sourcePosID, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.AddField("DestinationWell", targetPosID, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.AddField("SourceVesselType", SourceVesselType, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.AddField("DestinationVesselType", targetVesselType, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.AddField("TotalVol", TotalVol, hslFloat);
    WRITE_TERMINAL_PLATE_DATA.AddField("SampleTransferVol", cultureVolume, hslFloat);
    WRITE_TERMINAL_PLATE_DATA.AddField("Reagent1Vol", mediaVolume, hslFloat);
    WRITE_TERMINAL_PLATE_DATA.AddField("Reagent1ID", iMediaType, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.AddField("Reagent1Lot", iMediaLot, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.AddField("ProcessStep", ProcessStep, hslString, 255);
    WRITE_TERMINAL_PLATE_DATA.SetDelimiter(";");
    if( 0 == WRITE_TERMINAL_PLATE_DATA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [SampleTrackingTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.AddField("SampleID", SampleID, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.AddField("DateTime", date, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.AddField("SampleBarcode", targetBarcode, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.AddField("SampleWell", targetPosID, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.AddField("SampleVesselType", targetVesselType, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.AddField("Result", TCD, hslFloat);
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.AddField("ResultUnits", ResultUnits, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.AddField("ResultType", ResultType, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.AddField("AssayType", AssayType, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.SetDelimiter(";");
    if( 0 == WRITE_TERMINAL_PLATE_ANALYTICS_TCD.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.AddField("SampleID", SampleID, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.AddField("DateTime", date, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.AddField("SampleBarcode", targetBarcode, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.AddField("SampleWell", targetPosID, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.AddField("SampleVesselType", targetVesselType, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.AddField("Result", VCD, hslFloat);
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.AddField("ResultUnits", ResultUnits, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.AddField("ResultType", ResultType, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.AddField("AssayType", AssayType, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.SetDelimiter(";");
    if( 0 == WRITE_TERMINAL_PLATE_ANALYTICS_VCD.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.AddField("SampleID", SampleID, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.AddField("DateTime", date, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.AddField("SampleBarcode", targetBarcode, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.AddField("SampleWell", targetPosID, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.AddField("SampleVesselType", targetVesselType, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.AddField("Result", Viabillity, hslFloat);
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.AddField("ResultUnits", ResultUnits, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.AddField("ResultType", ResultType, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.AddField("AssayType", AssayType, hslString, 255);
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.SetDelimiter(";");
    if( 0 == WRITE_TERMINAL_PLATE_ANALYTICS_VIA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    {
      for(PlateNumber = 0; PlateNumber < iDWPsThisTime;)
      {
        PlateNumber = PlateNumber + 1;
        row = 1;
        PlateColID = 1;
        PlateBarcode=iArrBarcodesTerminalPlates.GetAt(PlateNumber-1);
        {
          for(loopCounter5 = 0; loopCounter5 < 12;)
          {
            loopCounter5 = loopCounter5 + 1;
            {
              for(loopCounter1 = 0; loopCounter1 < 8;)
              {
                loopCounter1 = loopCounter1 + 1;
                TranslateRowCoordinate(row, rowAlpha);
                PlatePosID = StrConcat2(rowAlpha, PlateColID);
                sqlone = Translate("SELECT DISTINCT [SPositionId], [SRackBC], [TRackBC], [TPositionID], [TSumStateDescription] FROM [ReportMapping] WHERE [TRackBC] = '");
                sqlStatement = StrConcat8(sqlone, PlateBarcode, Translate("' AND [TPositionID] = '"), PlatePosID, Translate("'"), Translate(""), Translate(""), Translate(""));
                READ_TRACKING_FILE.AddField("TRackBC", targetBarcode, hslString, 255);
                READ_TRACKING_FILE.AddField("TPositionId", targetPosID, hslString, 255);
                READ_TRACKING_FILE.AddField("SRackBC", sourceBarcode, hslString, 255);
                READ_TRACKING_FILE.AddField("SPositionId", sourcePosID, hslString, 255);
                READ_TRACKING_FILE.AddField("TSumStateDescription", statusSummary, hslString, 255);
                if( 0 == READ_TRACKING_FILE.Open(iArrSampleTrackingFiles.ElementAt( PlateNumber -1) + " " + "ReportMapping$", hslRead, sqlStatement) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iArrSampleTrackingFiles.ElementAt( PlateNumber -1), "HxMetEdCompCmd");
                }
                if( 0 == READ_TRACKING_FILE.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (statusSummary != "Not used")
                {
                  if (sourceBarcode != "----------")
                  {
                    cultureVolume = iCultureVolume.ElementAt( volumeCounter -1);
                    mediaVolume = iMediaVolume.ElementAt( volumeCounter -1);
                    TotalVol = mediaVolume + cultureVolume;
                    TCD = iTargetCellDensity.ElementAt( volumeCounter -1);
                    VCD = iTargetViaCellDensity.ElementAt( volumeCounter -1);
                    Viabillity = iTargetViability.ElementAt( volumeCounter -1);
                    volumeCounter = volumeCounter + 1;
                    if(0){
                      dialogHandle_1.SetOutput(Translate("date - "), date, "\n", Translate("targetBarcode - "), targetBarcode, "\n", Translate("targetPosID - "), targetPosID, "\n", Translate("targetVesselType - "), targetVesselType, "\n", Translate("sourceBarcode - "), sourceBarcode, "\n", Translate("sourcePosID - "), sourcePosID, "\n", Translate("sourceVesselType - "), SourceVesselType, "\n", Translate("TotalVol - "), TotalVol, "\n", Translate("CultureVol - "), cultureVolume, "\n", Translate("mediaVolume - "), mediaVolume, "\n", Translate("iMediaType - "), iMediaType, "\n", Translate("iMediaLot - "), iMediaLot, "\n", Translate("ProcessStep - "), ProcessStep);
                      dialogHandle_1.ShowOutput(Translate("Output"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    }
                    if( 0 == WRITE_TERMINAL_PLATE_DATA.WriteRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    ResultUnits = "Num Total Cells";
                    ResultType = "TCD";
                    if( 0 == WRITE_TERMINAL_PLATE_ANALYTICS_TCD.WriteRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    ResultUnits = "Num Viable Cells";
                    ResultType = "VCD";
                    if( 0 == WRITE_TERMINAL_PLATE_ANALYTICS_VCD.WriteRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    ResultUnits = "Viability";
                    ResultType = "%";
                    if( 0 == WRITE_TERMINAL_PLATE_ANALYTICS_VIA.WriteRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                  }
                }
                if( 0 != READ_TRACKING_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                READ_TRACKING_FILE.RemoveFields();
                if (row < 8)
                {
                  row = row + 1;
                }
                else
                {
                  row = 1;
                }
              }
            }
            if (PlateColID < 12)
            {
              PlateColID = PlateColID + 1;
            }
            else
            {
              PlateColID = 1;
            }
          }
        }
        HSLMapReport::DeleteFile(iArrSampleTrackingFiles.ElementAt( PlateNumber -1));
      }
    }
    if( 0 != WRITE_TERMINAL_PLATE_DATA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_TERMINAL_PLATE_DATA.RemoveFields();
    if( 0 != WRITE_TERMINAL_PLATE_ANALYTICS_TCD.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_TERMINAL_PLATE_ANALYTICS_TCD.RemoveFields();
    if( 0 != WRITE_TERMINAL_PLATE_ANALYTICS_VCD.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_TERMINAL_PLATE_ANALYTICS_VCD.RemoveFields();
    if( 0 != WRITE_TERMINAL_PLATE_ANALYTICS_VIA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_TERMINAL_PLATE_ANALYTICS_VIA.RemoveFields();
  }

  function AddFeedPipettingDataToDB( variable & iArrSampleTrackingFiles[], variable ipartAvol, variable ipartBvol, variable ipartAfeedtype, variable ipartAfeedlot, variable ipartBfeedtype, variable ipartBfeedlot ) void {
    private variable arrSize;
    private variable fileIndex;
    private variable statusSummary;
    private variable targetBarcode;
    private variable time;
    private variable date;
    private file READ_TRACKING_FILE;
    private file WRITE_FEEDING_DATA;
    private variable targetPosID;
    private variable SourceVesselType;
    private variable TotalVol;
    private variable SourceBarcode;
    private variable SourcePosID;
    private variable ProcessStep;
    private variable sampleVol;
    private variable targetVesselType;
    private variable SampleID;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    SourceVesselType = "Reservoir";
    SourceBarcode = "NA";
    SourcePosID = "NA";
    sampleVol = 0.0;
    targetVesselType = "96DW";
    ProcessStep = "96DW_Feed";
    SampleID = "NA";
    TotalVol = ipartAvol + ipartBvol;
    WRITE_FEEDING_DATA.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_FEEDING_DATA.AddField("SampleID", SampleID, hslString, 255);
    WRITE_FEEDING_DATA.AddField("DateTime", date, hslString, 255);
    WRITE_FEEDING_DATA.AddField("SourceBarcode", SourceBarcode, hslString, 255);
    WRITE_FEEDING_DATA.AddField("SourceWell", SourcePosID, hslString, 255);
    WRITE_FEEDING_DATA.AddField("SourceVesselType", SourceVesselType, hslString, 255);
    WRITE_FEEDING_DATA.AddField("DestinationBarcode", targetBarcode, hslString, 255);
    WRITE_FEEDING_DATA.AddField("DestinationWell", targetPosID, hslString, 255);
    WRITE_FEEDING_DATA.AddField("DestinationVesselType", targetVesselType, hslString, 255);
    WRITE_FEEDING_DATA.AddField("Reagent1Vol", ipartAvol, hslFloat);
    WRITE_FEEDING_DATA.AddField("TotalVol", TotalVol, hslFloat);
    WRITE_FEEDING_DATA.AddField("SampleTransferVol", sampleVol, hslFloat);
    WRITE_FEEDING_DATA.AddField("Reagent2Vol", ipartBvol, hslFloat);
    WRITE_FEEDING_DATA.AddField("Reagent1ID", ipartAfeedtype, hslString, 255);
    WRITE_FEEDING_DATA.AddField("Reagent1Lot", ipartAfeedlot, hslString, 255);
    WRITE_FEEDING_DATA.AddField("Reagent2ID", ipartBfeedtype, hslString, 255);
    WRITE_FEEDING_DATA.AddField("Reagent2Lot", ipartBfeedlot, hslString, 255);
    WRITE_FEEDING_DATA.AddField("ProcessStep", ProcessStep, hslString, 255);
    WRITE_FEEDING_DATA.SetDelimiter(";");
    if( 0 == WRITE_FEEDING_DATA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [SampleTrackingTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    arrSize=iArrSampleTrackingFiles.GetSize();
    {
      for(fileIndex = 0; fileIndex < arrSize;)
      {
        fileIndex = fileIndex + 1;
        READ_TRACKING_FILE.AddField("TRackBC", targetBarcode, hslString, 255);
        READ_TRACKING_FILE.AddField("TPositionId", targetPosID, hslString, 255);
        READ_TRACKING_FILE.AddField("TSumStateDescription", statusSummary, hslString, 255);
        if( 0 == READ_TRACKING_FILE.Open(iArrSampleTrackingFiles.ElementAt( fileIndex -1) + " " + "ReportMapping$", hslRead, "SELECT DISTINCT [TRackBC], [TPositionID], [TSumStateDescription] FROM [ReportMapping]") )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iArrSampleTrackingFiles.ElementAt( fileIndex -1), "HxMetEdCompCmd");
        }
        {
          while (
             (READ_TRACKING_FILE.Eof() == 0)
          )
          {
            if( 0 == READ_TRACKING_FILE.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (statusSummary != "Not used")
            {
              if( 0 == WRITE_FEEDING_DATA.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
        if( 0 != READ_TRACKING_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_TRACKING_FILE.RemoveFields();
        HSLMapReport::DeleteFile(iArrSampleTrackingFiles.ElementAt( fileIndex -1));
      }
    }
    if( 0 != WRITE_FEEDING_DATA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_FEEDING_DATA.RemoveFields();
  }

  function AddParentalSummaryDataToDB( variable iParentalID, variable iConfluenceLimit, variable iNumWellsAbove, variable iNumWellsPicked ) void {
    private variable time;
    private variable date;
    private file WRITE_PARENTAL_SUMMARY_DATA_TABLE;
    WRITE_PARENTAL_SUMMARY_DATA_TABLE.AddField("ParentalID", iParentalID, hslString, 255);
    WRITE_PARENTAL_SUMMARY_DATA_TABLE.AddField("Date", date, hslString, 255);
    WRITE_PARENTAL_SUMMARY_DATA_TABLE.AddField("ConfluenceLimit", iConfluenceLimit, hslString, 255);
    WRITE_PARENTAL_SUMMARY_DATA_TABLE.AddField("NumWellsAboveConfLim", iNumWellsAbove, hslString, 255);
    WRITE_PARENTAL_SUMMARY_DATA_TABLE.AddField("NumWellsPicked", iNumWellsPicked, hslString, 255);
    WRITE_PARENTAL_SUMMARY_DATA_TABLE.AddField("experimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_PARENTAL_SUMMARY_DATA_TABLE.SetDelimiter(";");
    if( 0 == WRITE_PARENTAL_SUMMARY_DATA_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [ParentalSummaryTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    if( 0 == WRITE_PARENTAL_SUMMARY_DATA_TABLE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != WRITE_PARENTAL_SUMMARY_DATA_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_PARENTAL_SUMMARY_DATA_TABLE.RemoveFields();
  }

  function AddOctetProAMethodToDB( variable iOctetPlateBarcode, variable iReadType, variable iAssayDay, variable iDilution, variable iBiosensorLot, variable iBiosensorType, variable iOctetMethodFile, variable iOctetDataDir, variable iOctetiniFile, variable iOctetSN ) void {
    private variable time;
    private variable date;
    private file WRITE_OCTET_METHOD_TABLE;
    private variable AssayType;
    private variable SampleVesselType;
    WRITE_OCTET_METHOD_TABLE.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.AddField("DateTime", date, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.AddField("SampleBarcode", iOctetPlateBarcode, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.AddField("SampleVesselType", SampleVesselType, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.AddField("AssayType", AssayType, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.AddField("IntermediateOrFinal", iReadType, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.AddField("AssayDay", iAssayDay, hslInteger);
    WRITE_OCTET_METHOD_TABLE.AddField("Dilution", iDilution, hslFloat);
    WRITE_OCTET_METHOD_TABLE.AddField("AssaySpecificLotNum1", iBiosensorLot, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.AddField("AssaySpecificLotNum1Type", iBiosensorType, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.AddField("DeviceSerialNumber", iOctetSN, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.AddField("ResultsLocation1", iOctetMethodFile, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.AddField("ResultsLocation2", iOctetDataDir, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.AddField("ResultsLocation3", iOctetiniFile, hslString, 255);
    WRITE_OCTET_METHOD_TABLE.SetDelimiter(";");
    if( 0 == WRITE_OCTET_METHOD_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticMethodTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    SampleVesselType = "384w_Octet";
    AssayType = "Octet_ProteinA";
    if( 0 == WRITE_OCTET_METHOD_TABLE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != WRITE_OCTET_METHOD_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_OCTET_METHOD_TABLE.RemoveFields();
  }

  function PlatesInLiconic( variable PlateType, variable InventoryType, variable & NumOfPlates ) void {
    private variable number;
    private variable loopCounter1;
    private variable mySQLCommand;
    private variable myFileName;
    private variable myTableName;
    private file QUERY_LICONIC_DB;
    NumOfPlates = 0;
    myFileName = Translate("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\MedImmune_STXManagment.mdb");
    myTableName = Translate("STXCarouselTable");
    if (InventoryType == 1)
    {
      mySQLCommand = StrConcat8(Translate("SELECT COUNT(*) AS [Number] FROM ["), myTableName, Translate("] WHERE [Partition] = '"), PlateType, Translate("' AND [PlatePresent] = 1 AND [Status] = 'INCUBATOR'"), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      mySQLCommand = StrConcat8(Translate("SELECT COUNT([Barcode]) AS [Number] FROM ["), myTableName, Translate("] WHERE [Partition] = '"), PlateType, Translate("' AND [PlatePresent] = 1 AND [Status] = 'INCUBATOR'"), Translate(""), Translate(""), Translate(""));
    }
    QUERY_LICONIC_DB.AddField("Number", number, hslInteger);
    if( 0 == QUERY_LICONIC_DB.Open(myFileName + " " + myTableName, hslRead, mySQLCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFileName, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (QUERY_LICONIC_DB.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == QUERY_LICONIC_DB.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != QUERY_LICONIC_DB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    QUERY_LICONIC_DB.RemoveFields();
    NumOfPlates = number;
  }

  function BarcodedPlateListLiconic( variable PlateType, variable & BCPlateList, variable & ArrBCPlate[] ) void {
    private variable loopCounter1;
    private variable barcode;
    private variable mySQLCommand;
    private variable myFileName;
    private variable myTableName;
    private file QUERY_LICONIC_DB_BARCODES;
    BCPlateList = 0;
    ArrBCPlate.SetSize( 0);
    myFileName = Translate("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\MedImmune_STXManagment.mdb");
    myTableName = Translate("STXCarouselTable");
    ArrBCPlate.SetSize(0);
    mySQLCommand = StrConcat8(Translate("SELECT [Barcode] FROM ["), myTableName, Translate("] WHERE [Partition] = '"), PlateType, Translate("' AND [PlatePresent] = 1 AND [Status] = 'INCUBATOR' AND [Barcode] <> ''"), Translate(""), Translate(""), Translate(""));
    QUERY_LICONIC_DB_BARCODES.AddField("Barcode", barcode, hslString, 255);
    if( 0 == QUERY_LICONIC_DB_BARCODES.Open(myFileName + " " + myTableName, hslRead, mySQLCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFileName, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (QUERY_LICONIC_DB_BARCODES.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == QUERY_LICONIC_DB_BARCODES.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        ArrBCPlate.AddAsLast(barcode);
        if (loopCounter1 == 1)
        {
          BCPlateList = barcode;
        }
        else
        {
          BCPlateList = BCPlateList + ", " + barcode;
        }
      }
    }
    if( 0 != QUERY_LICONIC_DB_BARCODES.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    QUERY_LICONIC_DB_BARCODES.RemoveFields();
  }

  function TerminalPlateLookup( variable NumPlates, variable & barcodes, variable & Arrbarcodes[], variable & GoodFlag ) void {
    private variable sqlStatement;
    private variable TerminalPlateFileReadCounter;
    private variable terminalPlateBarcode;
    private file READ_TERMINAL_PLATES;
    private variable BarcodeDialog;
    private dialog dialogHandle_2;
    barcodes = 0;
    Arrbarcodes.SetSize( 0);
    GoodFlag = 0;
    GoodFlag = 1;
    if(0){
      sqlStatement = "SELECT DISTINCT Date, TerminalPlateBarcode FROM TerminalPlateTable " +
      "WHERE experimentID = '" + SampleTrackingDB_glExperimentID + "' ORDER BY Date DESC";
    }
    sqlStatement = "SELECT DISTINCT  DateTime, DestinationBarcode, ProcessStep, DestinationVesselType FROM SampleTrackingTable" +
    " WHERE ExperimentID = '" + SampleTrackingDB_glExperimentID + "' AND ProcessStep = '96DW_Terminal_Setup' AND DestinationVesselType = '96DW' ORDER BY DateTime DESC";
    barcodes = Translate("");
    Arrbarcodes.SetSize(0);
    READ_TERMINAL_PLATES.AddField("DestinationBarcode", terminalPlateBarcode, hslString, 255);
    READ_TERMINAL_PLATES.SetDelimiter(";");
    if( 0 == READ_TERMINAL_PLATES.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    {
      for(TerminalPlateFileReadCounter = 0; TerminalPlateFileReadCounter < NumPlates;)
      {
        TerminalPlateFileReadCounter = TerminalPlateFileReadCounter + 1;
        onerror goto errLabel_3 ;
        err.Clear();
        if( 0 == READ_TERMINAL_PLATES.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Arrbarcodes.AddAsLast(terminalPlateBarcode);
        if (TerminalPlateFileReadCounter == 1)
        {
          barcodes = terminalPlateBarcode;
        }
        else
        {
          barcodes = barcodes + ", " + terminalPlateBarcode;
        }
        errLabel_3 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          dialogHandle_2.SetOutput(Translate("Fewer than "), NumPlates, Translate(" terminal plates for this experiment ID exist in the SQL database.\n"), Translate("\nDo you want to continue?\n"), Translate("Press YES if this list is correct or press NO to abort run."));
          BarcodeDialog = dialogHandle_2.ShowOutput(Translate("Number of Terminal Plates in SQL Database Error"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
          GoodFlag = 0;
          break;
        }   /* end if from skip handler if no error */
      }
    }
    if( 0 != READ_TERMINAL_PLATES.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    READ_TERMINAL_PLATES.RemoveFields();
    if (BarcodeDialog == 7)
    {
      abort;
    }
  }

  function PassagePlateLookup( variable NumPlates, variable & barcodes, variable & Arrbarcodes[] ) void {
    private variable PassagePlateFileReadCounter;
    private variable sqlStatement;
    private variable passagePlateBarcode;
    private file READ_PASSAGE_PLATES;
    barcodes = 0;
    Arrbarcodes.SetSize( 0);
    if(0){
      sqlStatement = "SELECT DISTINCT Date, PassagePlateBarcode FROM PassagePlateTable" +
      "WHERE experimentID = '" + SampleTrackingDB_glExperimentID + "' ORDER BY Date DESC";
    }
    sqlStatement = "SELECT DISTINCT DateTime, DestinationBarcode, ProcessStep, DestinationVesselType FROM SampleTrackingTable" +
    "WHERE experimentID = '" + SampleTrackingDB_glExperimentID + "' AND ProcessStep = '96DW_Passage' AND DestinationVesselType = '96DW' ORDER BY DateTime DESC";
    barcodes = Translate("");
    Arrbarcodes.SetSize(0);
    READ_PASSAGE_PLATES.AddField("DestinationBarcode", passagePlateBarcode, hslString, 255);
    READ_PASSAGE_PLATES.SetDelimiter(";");
    if( 0 == READ_PASSAGE_PLATES.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    {
      for(PassagePlateFileReadCounter = 0; PassagePlateFileReadCounter < NumPlates;)
      {
        PassagePlateFileReadCounter = PassagePlateFileReadCounter + 1;
        onerror goto errLabel_4 ;
        err.Clear();
        if( 0 == READ_PASSAGE_PLATES.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Arrbarcodes.AddAsLast(passagePlateBarcode);
        if (PassagePlateFileReadCounter == 1)
        {
          barcodes = passagePlateBarcode;
        }
        else
        {
          barcodes = barcodes + ", " + passagePlateBarcode;
        }
        errLabel_4 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          break;
        }   /* end if from skip handler if no error */
      }
    }
    if( 0 != READ_PASSAGE_PLATES.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    READ_PASSAGE_PLATES.RemoveFields();
  }

  function CompareBarcodes( variable NumPlates, variable & LiconicBarcodes[], variable & SQLBarcodes[], variable & Match ) void {
    private variable loopCounter1;
    private variable NumMatches;
    private variable loopCounter2;
    private variable NumPlatesDB;
    Match = 0;
    NumMatches = 0;
    NumPlatesDB=SQLBarcodes.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < NumPlates;)
      {
        loopCounter1 = loopCounter1 + 1;
        {
          for(loopCounter2 = 0; loopCounter2 < NumPlatesDB;)
          {
            loopCounter2 = loopCounter2 + 1;
            if (LiconicBarcodes.ElementAt( loopCounter1 -1) == SQLBarcodes.ElementAt( loopCounter2 -1))
            {
              NumMatches = NumMatches + 1;
            }
          }
        }
      }
    }
    if (NumMatches == NumPlates)
    {
      Match = 1;
    }
    else
    {
      Match = 0;
    }
  }

  function SetupPlateLookup( variable NumPlates, variable & barcodes, variable & Arrbarcodes[], variable & GoodFlag ) void {
    private variable sqlStatement;
    private variable setupPlateBarcode;
    private variable SetupPlateFileReadCounter;
    private file READ_SETUP_PLATES;
    private variable BarcodeDialog;
    private variable NumPlatesFound;
    private file READ_SETUP_PLATES_FROM_CLONEPIX;
    private dialog dialogHandle_5;
    private dialog dialogHandle_6;
    barcodes = 0;
    Arrbarcodes.SetSize( 0);
    GoodFlag = 0;
    GoodFlag = 1;
    if(0){
      sqlStatement = "SELECT DISTINCT Date, PassagePlateBarcode FROM PassagePlateTable " +
      "WHERE experimentID = '" + SampleTrackingDB_glExperimentID + "' ORDER BY Date DESC";
    }
    sqlStatement = "SELECT DISTINCT DateTime, DestinationBarcode, ProcessStep, DestinationVesselType FROM SampleTrackingTable" +
    "WHERE ExperimentID = '" + SampleTrackingDB_glExperimentID + "' AND ProcessStep = '96DW_Passage' AND DestinationVesselType = '96DW' ORDER BY DateTime DESC";
    barcodes = Translate("");
    NumPlatesFound = 0;
    Arrbarcodes.SetSize(0);
    READ_SETUP_PLATES.AddField("DestinationBarcode", setupPlateBarcode, hslString, 255);
    READ_SETUP_PLATES.SetDelimiter(";");
    if( 0 == READ_SETUP_PLATES.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    {
      for(SetupPlateFileReadCounter = 0; SetupPlateFileReadCounter < NumPlates;)
      {
        SetupPlateFileReadCounter = SetupPlateFileReadCounter + 1;
        onerror goto errLabel_7 ;
        err.Clear();
        if( 0 == READ_SETUP_PLATES.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Arrbarcodes.AddAsLast(setupPlateBarcode);
        if (SetupPlateFileReadCounter == 1)
        {
          barcodes = setupPlateBarcode;
        }
        else
        {
          barcodes = barcodes + ", " + setupPlateBarcode;
        }
        NumPlatesFound = NumPlatesFound + 1;
        errLabel_7 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          if (NumPlatesFound != 0)
          {
            dialogHandle_6.SetOutput(Translate("Fewer than "), NumPlates, Translate(" setup plates for this experiment ID exist in the SQL database.\n"), Translate("\nDo you want to continue?\n"), Translate("Press YES if this list is correct or press NO to abort run."));
            BarcodeDialog = dialogHandle_6.ShowOutput(Translate("Number of Setup Plates in SQL Database Error"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
            GoodFlag = 0;
          }
          break;
        }   /* end if from skip handler if no error */
      }
    }
    if( 0 != READ_SETUP_PLATES.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    READ_SETUP_PLATES.RemoveFields();
    if(0){
      if (NumPlatesFound == 0)
      {
        sqlStatement = "SELECT DISTINCT Date, CulturePlateBarcode FROM ClonePixPassageTable " +
        "WHERE experimentID = '" + SampleTrackingDB_glExperimentID + "' ORDER BY Date DESC";
        READ_SETUP_PLATES_FROM_CLONEPIX.AddField("CulturePlateBarcode", setupPlateBarcode, hslString, 255);
        READ_SETUP_PLATES_FROM_CLONEPIX.SetDelimiter(";");
        if( 0 == READ_SETUP_PLATES_FROM_CLONEPIX.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
        {
          for(SetupPlateFileReadCounter = 0; SetupPlateFileReadCounter < NumPlates;)
          {
            SetupPlateFileReadCounter = SetupPlateFileReadCounter + 1;
            onerror goto errLabel_8 ;
            err.Clear();
            if( 0 == READ_SETUP_PLATES_FROM_CLONEPIX.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            Arrbarcodes.AddAsLast(setupPlateBarcode);
            if (SetupPlateFileReadCounter == 1)
            {
              barcodes = setupPlateBarcode;
            }
            else
            {
              barcodes = barcodes + ", " + setupPlateBarcode;
            }
            errLabel_8 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_5.SetOutput(Translate("Fewer than "), NumPlates, Translate(" setup plates for this experiment ID exist in the SQL database.\n"), Translate("\nDo you want to continue?\n"), Translate("Press YES if this list is correct or press NO to abort run."));
              BarcodeDialog = dialogHandle_5.ShowOutput(Translate("Number of Setup Plates in SQL Database Error"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
              break;
            }   /* end if from skip handler if no error */
          }
        }
        if( 0 != READ_SETUP_PLATES_FROM_CLONEPIX.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_SETUP_PLATES_FROM_CLONEPIX.RemoveFields();
      }
    }
    if (BarcodeDialog == 7)
    {
      abort;
    }
  }

  function Liconic384PlateBarcode( variable & barcode384 ) void {
    private variable mySQLCommand;
    private variable myFileName;
    private variable myTableName;
    private file QUERY_LICONIC_DB;
    private variable PlateType;
    barcode384 = 0;
    myFileName = Translate("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\MedImmune_STXManagment.mdb");
    myTableName = Translate("STXCarouselTable");
    PlateType = Translate("ASSAY_PLATES_384");
    mySQLCommand = StrConcat8(Translate("SELECT [Barcode] FROM ["), myTableName, Translate("] WHERE [Partition] = '"), PlateType, Translate("' AND [PlatePresent] = 1 AND [Status] = 'INCUBATOR'"), Translate(""), Translate(""), Translate(""));
    QUERY_LICONIC_DB.AddField("Barcode", barcode384, hslString, 255);
    if( 0 == QUERY_LICONIC_DB.Open(myFileName + " " + myTableName, hslRead, mySQLCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFileName, "HxMetEdCompCmd");
    }
    if( 0 == QUERY_LICONIC_DB.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != QUERY_LICONIC_DB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    QUERY_LICONIC_DB.RemoveFields();
  }

  function SendCentrifugationEmail( variable username, variable subject, variable message, variable userdomain ) void {
    private variable sendEmailAddress;
    Util::SetSMTPServerHostName(Translate("relay.astrazeneca.net"));
    sendEmailAddress = StrConcat4(username, Translate("@"), userdomain, Translate(""));
    Util::SetEMailAddressOfSender(sendEmailAddress);
    Util::SendEMail(sendEmailAddress, subject, message);
  }

  function SetErrorEmailSettings( variable username, variable userdomain ) void {
    private variable errorEmailAddress;
    errorEmailAddress = StrConcat4(username, Translate("@"), userdomain, Translate(""));
    EmailUtilLib::SetSMTPServerHostName(Translate("relay.astrazeneca.net"));
    EmailUtilLib::ChangeRecieverAddress(errorEmailAddress);
    EmailUtilLib::SetEMailAddressOfSender(errorEmailAddress);
  }

  function Add384wHitpickPipettingDataToDB( variable & iArrSampleTrackingFiles[], variable icultureVolume, variable imediaVolume, variable imediatype, variable imedialot ) void {
    private variable arrSize;
    private variable previousSourcePosID;
    private variable previousSourceBarcode;
    private variable previousTargetBarcode;
    private variable targetPosID;
    private variable previousTargetPosID;
    private variable arrIndex;
    private variable statusSummary;
    private variable sourceBarcode;
    private variable targetBarcode;
    private variable time;
    private variable date;
    private variable sourcePosID;
    private file READ_SAMPLE_TRACKING_FILE;
    private file WRITE_FACS_HITPICK_DATA;
    private variable totalVol;
    private variable ProcessStep;
    private variable SourceVesselType;
    private variable SampleID;
    private variable targetVesselType;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    SourceVesselType = "384w";
    targetVesselType = "96w";
    ProcessStep = "384w_Hitpick";
    SampleID = "NA";
    totalVol = imediaVolume + icultureVolume;
    WRITE_FACS_HITPICK_DATA.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_FACS_HITPICK_DATA.AddField("SampleID", SampleID, hslString, 255);
    WRITE_FACS_HITPICK_DATA.AddField("SourceBarcode", sourceBarcode, hslString, 255);
    WRITE_FACS_HITPICK_DATA.AddField("SourceWell", sourcePosID, hslString, 255);
    WRITE_FACS_HITPICK_DATA.AddField("SourceVesselType", SourceVesselType, hslString, 255);
    WRITE_FACS_HITPICK_DATA.AddField("DestinationBarcode", targetBarcode, hslString, 255);
    WRITE_FACS_HITPICK_DATA.AddField("DestinationWell", targetPosID, hslString, 255);
    WRITE_FACS_HITPICK_DATA.AddField("DestinationVesselType", targetVesselType, hslString, 255);
    WRITE_FACS_HITPICK_DATA.AddField("TotalVol", totalVol, hslFloat);
    WRITE_FACS_HITPICK_DATA.AddField("SampleTransferVol", icultureVolume, hslFloat);
    WRITE_FACS_HITPICK_DATA.AddField("Reagent1Vol", imediaVolume, hslFloat);
    WRITE_FACS_HITPICK_DATA.AddField("DateTime", date, hslString, 255);
    WRITE_FACS_HITPICK_DATA.AddField("Reagent1ID", imediatype, hslString, 255);
    WRITE_FACS_HITPICK_DATA.AddField("Reagent1Lot", imedialot, hslString, 255);
    WRITE_FACS_HITPICK_DATA.AddField("ProcessStep", ProcessStep, hslString, 255);
    WRITE_FACS_HITPICK_DATA.SetDelimiter(";");
    if( 0 == WRITE_FACS_HITPICK_DATA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [SampleTrackingTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    arrSize=iArrSampleTrackingFiles.GetSize();
    previousSourceBarcode = Translate("");
    previousTargetBarcode = Translate("");
    previousSourcePosID = Translate("");
    previousTargetPosID = Translate("");
    {
      for(arrIndex = 0; arrIndex < arrSize;)
      {
        arrIndex = arrIndex + 1;
        READ_SAMPLE_TRACKING_FILE.AddField("TRackBC", targetBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TPositionId", targetPosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SRackBC", sourceBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SPositionId", sourcePosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TSumStateDescription", statusSummary, hslString, 255);
        if( 0 == READ_SAMPLE_TRACKING_FILE.Open(iArrSampleTrackingFiles.ElementAt( arrIndex -1) + " " + "ReportMapping$", hslRead, "SELECT DISTINCT [SPositionId], [SRackBC], [TRackBC], [TPositionID], [TSumStateDescription] FROM [ReportMapping]") )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iArrSampleTrackingFiles.ElementAt( arrIndex -1), "HxMetEdCompCmd");
        }
        {
          while (
             (READ_SAMPLE_TRACKING_FILE.Eof() == 0)
          )
          {
            if( 0 == READ_SAMPLE_TRACKING_FILE.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (statusSummary != "Not used")
            {
              if (sourceBarcode != "----------")
              {
                if( 0 == WRITE_FACS_HITPICK_DATA.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
          }
        }
        if( 0 != READ_SAMPLE_TRACKING_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_SAMPLE_TRACKING_FILE.RemoveFields();
        TrcTrace(Translate("Database Upload Complete for : "), iArrSampleTrackingFiles.ElementAt( arrIndex -1));
        HSLMapReport::DeleteFile(iArrSampleTrackingFiles.ElementAt( arrIndex -1));
      }
    }
    if( 0 != WRITE_FACS_HITPICK_DATA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_FACS_HITPICK_DATA.RemoveFields();
  }

  private function XAddOctetAutoDatatoDB( variable & arrOctetBarcode[], variable & arrOctetDataDir[], variable NumOctetPlates, variable octetDilFactor ) void {
    private variable octetPlateBarcode;
    private variable row;
    private variable proteinTiterDil2;
    private variable titerColumn;
    private variable posID;
    private variable positionColumn;
    private variable proteinTiterDil;
    private variable readCounter;
    private variable time;
    private variable proteinTiter;
    private variable date;
    private file WRITE_OCTET_DATA_TO_DB;
    private variable loopCounter1;
    private variable iOctetInputFile;
    private variable shortDir;
    private variable Directory;
    private variable length;
    private variable lengthMid;
    private variable start;
    private dialog dialogHandle_9;
    private dialog dialogHandle3;
    private timer timer3;
    private dialog dialogHandle1;
    private dialog dialogHandle2;
    private dialog dialogHandle_10;
    private dialog dialogHandle_11;
    private dialog dialogHandle_12;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    proteinTiter = 0;
    date = date + time;
    if(0){
      start = 46;
    }
    start = 13;
    WRITE_OCTET_DATA_TO_DB.AddField("experimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("OctetTestPlateBarcode", octetPlateBarcode, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("OctetTestPlateWellID", posID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("ProteinTiter", proteinTiter, hslFloat);
    WRITE_OCTET_DATA_TO_DB.AddField("Date", date, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("RunID", SampleTrackingDB_glRunID, hslInteger);
    WRITE_OCTET_DATA_TO_DB.SetDelimiter(";");
    if( 0 == WRITE_OCTET_DATA_TO_DB.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [OctetReadDataTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    positionColumn = 6;
    titerColumn = 13;
    {
      for(loopCounter1 = 0; loopCounter1 < NumOctetPlates;)
      {
        loopCounter1 = loopCounter1 + 1;
        Directory=arrOctetDataDir.GetAt(loopCounter1-1);
        octetPlateBarcode=arrOctetBarcode.GetAt(loopCounter1-1);
        length = StrGetLength(Directory);
        lengthMid = length - start;
        shortDir = StrMid(Directory, start, lengthMid);
        if(0){
          dialogHandle1.SetOutput(shortDir);
          dialogHandle1.ShowOutput(Translate("shortDir"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        iOctetInputFile = "Z:" + shortDir + "ExcelExportQ.xls";
        if(0){
          dialogHandle2.SetOutput(iOctetInputFile);
          dialogHandle2.ShowOutput(Translate("iOctet"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        if( 0 == timer3.SetTimer(5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer3.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        MicrosoftExcel::Init();
        MicrosoftExcel::OpenFile(iOctetInputFile);
        TrcTrace(Translate("Octet data file: "), iOctetInputFile);
        MicrosoftExcel::SelectSheet(4);
        row = 2;
        {
          for(readCounter = 0; readCounter < 96;)
          {
            readCounter = readCounter + 1;
            onerror goto errLabel_13 ;
            err.Clear();
            MicrosoftExcel::GetCellValue(positionColumn, row, posID);
            errLabel_13 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle3.SetOutput(Translate("Well Error\n"), octetPlateBarcode);
              dialogHandle3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
            onerror goto errLabel_14 ;
            err.Clear();
            MicrosoftExcel::GetCellValue(titerColumn, row, proteinTiterDil2);
            errLabel_14 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_9.SetOutput(Translate("Titer Error\n"), octetPlateBarcode);
              dialogHandle_9.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
            if (proteinTiterDil2 == "Too High")
            {
              if(0){
                dialogHandle_10.SetOutput(Translate("Result Too High"));
                dialogHandle_10.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              }
              proteinTiterDil = 99999;
              proteinTiter = proteinTiterDil;
            }
            else
            {
              if (proteinTiterDil2 == "")
              {
                if(0){
                  dialogHandle_12.SetOutput(Translate("Result Empty"));
                  dialogHandle_12.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                }
                proteinTiterDil = 0;
                proteinTiter = octetDilFactor * proteinTiterDil;
              }
              else
              {
                if (proteinTiterDil2 == "Too Low")
                {
                  if(0){
                    dialogHandle_11.SetOutput(Translate("Result Too Low"));
                    dialogHandle_11.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  }
                  proteinTiterDil = 0.1;
                  proteinTiter = proteinTiterDil;
                }
                else
                {
                  proteinTiterDil = StrFVal(proteinTiterDil2);
                  proteinTiter = octetDilFactor * proteinTiterDil;
                }
              }
            }
            if( 0 == WRITE_OCTET_DATA_TO_DB.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            row = row + 1;
          }
        }
        MicrosoftExcel::End();
      }
    }
    if( 0 != WRITE_OCTET_DATA_TO_DB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_OCTET_DATA_TO_DB.RemoveFields();
  }

  private function XAddOctetAutoDatatoDB_OctetV6( variable & arrOctetBarcode[], variable & arrOctetDataDir[], variable NumOctetPlates, variable octetDilFactor ) void {
    private dialog dialogHandle_15;
    private dialog dialogHandle_16;
    private variable iOctetInputFile;
    private variable octetPlateBarcode;
    private variable row;
    private variable shortDir;
    private variable Directory;
    private variable length;
    private variable proteinTiterDil2;
    private variable titerColumn;
    private variable lengthMid;
    private variable posID;
    private variable loopCounter1;
    private variable positionColumn;
    private variable start;
    private variable proteinTiterDil;
    private variable readCounter;
    private variable time;
    private variable proteinTiter;
    private variable date;
    private timer timer3;
    private file WRITE_OCTET_DATA_TO_DB;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    proteinTiter = 0;
    date = date + time;
    if(0){
      start = 46;
    }
    start = 13;
    WRITE_OCTET_DATA_TO_DB.AddField("experimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("OctetTestPlateBarcode", octetPlateBarcode, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("OctetTestPlateWellID", posID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("ProteinTiter", proteinTiter, hslFloat);
    WRITE_OCTET_DATA_TO_DB.AddField("Date", date, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("RunID", SampleTrackingDB_glRunID, hslInteger);
    WRITE_OCTET_DATA_TO_DB.SetDelimiter(";");
    if( 0 == WRITE_OCTET_DATA_TO_DB.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [OctetReadDataTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    positionColumn = 11;
    titerColumn = 16;
    {
      for(loopCounter1 = 0; loopCounter1 < NumOctetPlates;)
      {
        loopCounter1 = loopCounter1 + 1;
        Directory=arrOctetDataDir.GetAt(loopCounter1-1);
        octetPlateBarcode=arrOctetBarcode.GetAt(loopCounter1-1);
        length = StrGetLength(Directory);
        lengthMid = length - start;
        shortDir = StrMid(Directory, start, lengthMid);
        iOctetInputFile = "Z:" + shortDir + "ExcelReport.xls";
        if( 0 == timer3.SetTimer(5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer3.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        MicrosoftExcel::Init();
        MicrosoftExcel::OpenFile(iOctetInputFile);
        TrcTrace(Translate("Octet data file: "), iOctetInputFile);
        MicrosoftExcel::SelectSheet(2);
        row = 39;
        {
          for(readCounter = 0; readCounter < 96;)
          {
            readCounter = readCounter + 1;
            onerror goto errLabel_17 ;
            err.Clear();
            MicrosoftExcel::GetCellValue(positionColumn, row, posID);
            errLabel_17 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_15.SetOutput(Translate("Well Error\n"), octetPlateBarcode);
              dialogHandle_15.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
            onerror goto errLabel_18 ;
            err.Clear();
            MicrosoftExcel::GetCellValue(titerColumn, row, proteinTiterDil2);
            errLabel_18 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_16.SetOutput(Translate("Titer Error\n"), octetPlateBarcode);
              dialogHandle_16.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
            proteinTiterDil = StrFVal(proteinTiterDil2);
            proteinTiter = octetDilFactor * proteinTiterDil;
            if( 0 == WRITE_OCTET_DATA_TO_DB.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            row = row + 1;
          }
        }
        MicrosoftExcel::End();
      }
    }
    if( 0 != WRITE_OCTET_DATA_TO_DB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_OCTET_DATA_TO_DB.RemoveFields();
  }

  private function XAddOctetAutoDatatoDB_ManualBatchQuant( variable & arrOctetBarcode[], variable & arrOctetDataDir[], variable NumOctetPlates, variable octetDilFactor ) void {
    private dialog dialogHandle_19;
    private dialog dialogHandle_20;
    private variable iOctetInputFile;
    private variable octetPlateBarcode;
    private variable row;
    private variable shortDir;
    private variable Directory;
    private variable length;
    private variable proteinTiterDil2;
    private variable titerColumn;
    private variable posID;
    private variable lengthMid;
    private variable loopCounter1;
    private variable positionColumn;
    private variable proteinTiterDil;
    private variable start;
    private variable readCounter;
    private variable time;
    private variable proteinTiter;
    private variable date;
    private timer timer3;
    private file WRITE_OCTET_DATA_TO_DB;
    private dialog dialogHandle_21;
    private dialog dialogHandle_22;
    private dialog dialogHandle_23;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    proteinTiter = 0;
    date = date + time;
    if(0){
      start = 46;
    }
    start = 13;
    WRITE_OCTET_DATA_TO_DB.AddField("experimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("OctetTestPlateBarcode", octetPlateBarcode, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("OctetTestPlateWellID", posID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("ProteinTiter", proteinTiter, hslFloat);
    WRITE_OCTET_DATA_TO_DB.AddField("Date", date, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("RunID", SampleTrackingDB_glRunID, hslInteger);
    WRITE_OCTET_DATA_TO_DB.SetDelimiter(";");
    if( 0 == WRITE_OCTET_DATA_TO_DB.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [OctetReadDataTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    positionColumn = 6;
    titerColumn = 13;
    {
      for(loopCounter1 = 0; loopCounter1 < NumOctetPlates;)
      {
        loopCounter1 = loopCounter1 + 1;
        Directory=arrOctetDataDir.GetAt(loopCounter1-1);
        octetPlateBarcode=arrOctetBarcode.GetAt(loopCounter1-1);
        length = StrGetLength(Directory);
        lengthMid = length - start;
        shortDir = StrMid(Directory, start, lengthMid);
        if(0){
          iOctetInputFile = "Z:" + shortDir + "ExcelReportQ.xls";
        }
        iOctetInputFile = "Z:" + shortDir + "ExcelExportQ.xls";
        if( 0 == timer3.SetTimer(5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer3.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        MicrosoftExcel::Init();
        MicrosoftExcel::OpenFile(iOctetInputFile);
        TrcTrace(Translate("Octet data file: "), iOctetInputFile);
        MicrosoftExcel::SelectSheet(4);
        row = 3;
        {
          for(readCounter = 0; readCounter < 96;)
          {
            readCounter = readCounter + 1;
            onerror goto errLabel_24 ;
            err.Clear();
            MicrosoftExcel::GetCellValue(positionColumn, row, posID);
            errLabel_24 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_20.SetOutput(Translate("Well Error\n"), octetPlateBarcode);
              dialogHandle_20.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
            onerror goto errLabel_25 ;
            err.Clear();
            MicrosoftExcel::GetCellValue(titerColumn, row, proteinTiterDil2);
            errLabel_25 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_19.SetOutput(Translate("Titer Error\n"), octetPlateBarcode);
              dialogHandle_19.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
            if (proteinTiterDil2 == "Too High")
            {
              if(0){
                dialogHandle_21.SetOutput(Translate("Result Too High"));
                dialogHandle_21.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              }
              proteinTiterDil = 99999;
              proteinTiter = proteinTiterDil;
            }
            else
            {
              if (proteinTiterDil2 == "")
              {
                if(0){
                  dialogHandle_22.SetOutput(Translate("Result Empty"));
                  dialogHandle_22.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                }
                proteinTiterDil = 0;
                proteinTiter = octetDilFactor * proteinTiterDil;
              }
              else
              {
                if (proteinTiterDil2 == "Too Low")
                {
                  if(0){
                    dialogHandle_23.SetOutput(Translate("Result Too Low"));
                    dialogHandle_23.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  }
                  proteinTiterDil = 0.1;
                  proteinTiter = proteinTiterDil;
                }
                else
                {
                  proteinTiterDil = StrFVal(proteinTiterDil2);
                  proteinTiter = octetDilFactor * proteinTiterDil;
                }
              }
            }
            if( 0 == WRITE_OCTET_DATA_TO_DB.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            row = row + 1;
          }
        }
        MicrosoftExcel::End();
      }
    }
    if( 0 != WRITE_OCTET_DATA_TO_DB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_OCTET_DATA_TO_DB.RemoveFields();
  }

  function DualMediaSetupPlateLookup( variable NumPlates, variable & barcodes, variable & Arrbarcodes[], variable & GoodFlag ) void {
    private dialog dialogHandle_26;
    private dialog dialogHandle_27;
    private variable sqlStatement;
    private variable NumPlatesFound;
    private variable BarcodeDialog;
    private variable setupPlateBarcode;
    private variable SetupPlateFileReadCounter;
    private file READ_SETUP_PLATES;
    private file READ_SETUP_PLATES_FROM_CLONEPIX;
    barcodes = 0;
    Arrbarcodes.SetSize( 0);
    GoodFlag = 0;
    GoodFlag = 1;
    if(0){
      sqlStatement = "SELECT DISTINCT Date, PassagePlateBarcode FROM PassagePlateTable " +
      "WHERE experimentID = '" + SampleTrackingDB_glExperimentID + "'AND MediaSwitchFlag <> 1" + "ORDER BY Date DESC";
    }
    if(0){
      sqlStatement = "SELECT DISTINCT DateTime, DestinationBarcode, ProcessStep, DestinationVesselType FROM SampleTrackingTable " +
      "WHERE ExperimentID = '" + SampleTrackingDB_glExperimentID + "' AND ProcessStep = '96DW_Passage' AND DestinationVesselType = '96DW' ORDER BY DateTime DESC";
    }
    sqlStatement = "SELECT DISTINCT DateTime, DestinationBarcode, ProcessStep, DestinationVesselType FROM SampleTrackingTable " +
    "WHERE ExperimentID = '" + SampleTrackingDB_glExperimentID + "' AND (ProcessStep = '96DW_Passage' OR ProcessStep = '96w_Clone_Hitpick') AND DestinationVesselType = '96DW' ORDER BY DateTime DESC";
    TrcTrace(Translate("sql Statement - "), sqlStatement);
    barcodes = Translate("");
    NumPlatesFound = 0;
    Arrbarcodes.SetSize(0);
    READ_SETUP_PLATES.AddField("DestinationBarcode", setupPlateBarcode, hslString, 255);
    READ_SETUP_PLATES.SetDelimiter(";");
    if( 0 == READ_SETUP_PLATES.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    {
      for(SetupPlateFileReadCounter = 0; SetupPlateFileReadCounter < NumPlates;)
      {
        SetupPlateFileReadCounter = SetupPlateFileReadCounter + 1;
        onerror goto errLabel_28 ;
        err.Clear();
        if( 0 == READ_SETUP_PLATES.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Arrbarcodes.AddAsLast(setupPlateBarcode);
        if (SetupPlateFileReadCounter == 1)
        {
          barcodes = setupPlateBarcode;
        }
        else
        {
          barcodes = barcodes + ", " + setupPlateBarcode;
        }
        NumPlatesFound = NumPlatesFound + 1;
        errLabel_28 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          if (NumPlatesFound != 0)
          {
            dialogHandle_27.SetOutput(Translate("Fewer than "), NumPlates, Translate(" setup plates for this experiment ID exist in the SQL database.\n"), Translate("\nDo you want to continue?\n"), Translate("Press YES if this list is correct or press NO to abort run."));
            BarcodeDialog = dialogHandle_27.ShowOutput(Translate("Number of Setup Plates in SQL Database Error"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
            GoodFlag = 0;
          }
          break;
        }   /* end if from skip handler if no error */
      }
    }
    if( 0 != READ_SETUP_PLATES.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    READ_SETUP_PLATES.RemoveFields();
    if(0){
      if (NumPlatesFound == 0)
      {
        sqlStatement = "SELECT DISTINCT Date, CulturePlateBarcode FROM ClonePixPassageTable " +
        "WHERE experimentID = '" + SampleTrackingDB_glExperimentID + "' ORDER BY Date DESC";
        READ_SETUP_PLATES_FROM_CLONEPIX.AddField("CulturePlateBarcode", setupPlateBarcode, hslString, 255);
        READ_SETUP_PLATES_FROM_CLONEPIX.SetDelimiter(";");
        if( 0 == READ_SETUP_PLATES_FROM_CLONEPIX.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
        {
          for(SetupPlateFileReadCounter = 0; SetupPlateFileReadCounter < NumPlates;)
          {
            SetupPlateFileReadCounter = SetupPlateFileReadCounter + 1;
            onerror goto errLabel_29 ;
            err.Clear();
            if( 0 == READ_SETUP_PLATES_FROM_CLONEPIX.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            Arrbarcodes.AddAsLast(setupPlateBarcode);
            if (SetupPlateFileReadCounter == 1)
            {
              barcodes = setupPlateBarcode;
            }
            else
            {
              barcodes = barcodes + ", " + setupPlateBarcode;
            }
            errLabel_29 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_26.SetOutput(Translate("Fewer than "), NumPlates, Translate(" setup plates for this experiment ID exist in the SQL database.\n"), Translate("\nDo you want to continue?\n"), Translate("Press YES if this list is correct or press NO to abort run."));
              BarcodeDialog = dialogHandle_26.ShowOutput(Translate("Number of Setup Plates in SQL Database Error"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
              break;
            }   /* end if from skip handler if no error */
          }
        }
        if( 0 != READ_SETUP_PLATES_FROM_CLONEPIX.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_SETUP_PLATES_FROM_CLONEPIX.RemoveFields();
      }
    }
    if (BarcodeDialog == 7)
    {
      abort;
    }
  }

  function TerminalSetupPlateLookup( variable NumPlates, variable & barcodes, variable & Arrbarcodes[], variable & GoodFlag ) void {
    private dialog dialogHandle_30;
    private dialog dialogHandle_31;
    private variable sqlStatement;
    private variable NumPlatesFound;
    private variable BarcodeDialog;
    private variable setupPlateBarcode;
    private variable SetupPlateFileReadCounter;
    private file READ_SETUP_PLATES;
    private file READ_SETUP_PLATES_FROM_CLONEPIX;
    barcodes = 0;
    Arrbarcodes.SetSize( 0);
    GoodFlag = 0;
    GoodFlag = 1;
    if(0){
      sqlStatement = "SELECT DISTINCT Date, PassagePlateBarcode FROM PassagePlateTable " +
      "WHERE experimentID = '" + SampleTrackingDB_glExperimentID + "'AND MediaSwitchFlag = 1" + "ORDER BY Date DESC";
    }
    sqlStatement = "SELECT DISTINCT DateTime,  DestinationBarcode, ProcessStep, DestinationVesselType FROM SampleTrackingTable" +
    "WHERE ExperimentID = '" + SampleTrackingDB_glExperimentID + "' AND ProcessStep = '96DW_Passage' AND DestinationVesselType = '96DW' ORDER BY DateTime DESC";
    barcodes = Translate("");
    NumPlatesFound = 0;
    Arrbarcodes.SetSize(0);
    READ_SETUP_PLATES.AddField("DestinationBarcode", setupPlateBarcode, hslString, 255);
    READ_SETUP_PLATES.SetDelimiter(";");
    if( 0 == READ_SETUP_PLATES.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    {
      for(SetupPlateFileReadCounter = 0; SetupPlateFileReadCounter < NumPlates;)
      {
        SetupPlateFileReadCounter = SetupPlateFileReadCounter + 1;
        onerror goto errLabel_32 ;
        err.Clear();
        if( 0 == READ_SETUP_PLATES.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Arrbarcodes.AddAsLast(setupPlateBarcode);
        if (SetupPlateFileReadCounter == 1)
        {
          barcodes = setupPlateBarcode;
        }
        else
        {
          barcodes = barcodes + ", " + setupPlateBarcode;
        }
        NumPlatesFound = NumPlatesFound + 1;
        errLabel_32 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          if (NumPlatesFound != 0)
          {
            dialogHandle_31.SetOutput(Translate("Fewer than "), NumPlates, Translate(" setup plates for this experiment ID exist in the SQL database.\n"), Translate("\nDo you want to continue?\n"), Translate("Press YES if this list is correct or press NO to abort run."));
            BarcodeDialog = dialogHandle_31.ShowOutput(Translate("Number of Setup Plates in SQL Database Error"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
            GoodFlag = 0;
          }
          break;
        }   /* end if from skip handler if no error */
      }
    }
    if( 0 != READ_SETUP_PLATES.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    READ_SETUP_PLATES.RemoveFields();
    if(0){
      if (NumPlatesFound == 0)
      {
        sqlStatement = "SELECT DISTINCT Date, CulturePlateBarcode FROM ClonePixPassageTable " +
        "WHERE experimentID = '" + SampleTrackingDB_glExperimentID + "' ORDER BY Date DESC";
        READ_SETUP_PLATES_FROM_CLONEPIX.AddField("CulturePlateBarcode", setupPlateBarcode, hslString, 255);
        READ_SETUP_PLATES_FROM_CLONEPIX.SetDelimiter(";");
        if( 0 == READ_SETUP_PLATES_FROM_CLONEPIX.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
        {
          for(SetupPlateFileReadCounter = 0; SetupPlateFileReadCounter < NumPlates;)
          {
            SetupPlateFileReadCounter = SetupPlateFileReadCounter + 1;
            onerror goto errLabel_33 ;
            err.Clear();
            if( 0 == READ_SETUP_PLATES_FROM_CLONEPIX.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            Arrbarcodes.AddAsLast(setupPlateBarcode);
            if (SetupPlateFileReadCounter == 1)
            {
              barcodes = setupPlateBarcode;
            }
            else
            {
              barcodes = barcodes + ", " + setupPlateBarcode;
            }
            errLabel_33 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_30.SetOutput(Translate("Fewer than "), NumPlates, Translate(" setup plates for this experiment ID exist in the SQL database.\n"), Translate("\nDo you want to continue?\n"), Translate("Press YES if this list is correct or press NO to abort run."));
              BarcodeDialog = dialogHandle_30.ShowOutput(Translate("Number of Setup Plates in SQL Database Error"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
              break;
            }   /* end if from skip handler if no error */
          }
        }
        if( 0 != READ_SETUP_PLATES_FROM_CLONEPIX.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_SETUP_PLATES_FROM_CLONEPIX.RemoveFields();
      }
    }
    if (BarcodeDialog == 7)
    {
      abort;
    }
  }

  function AddFilterPlatePipettingDataToDB( variable & iArrSampleTrackingFiles[], variable iCultureVolume, variable iSourceFile ) void {
    private variable previousSourcePosID;
    private variable arrSize;
    private variable previousSourceBarcode;
    private variable sqlStatement;
    private variable previousTargetBarcode;
    private variable targetPosID;
    private variable arrIndex;
    private variable previousTargetPosID;
    private variable statusSummary;
    private variable sourceBarcode;
    private variable targetBarcode;
    private variable time;
    private variable date;
    private file READ_SAMPLE_TRACKING_FILE;
    private file WRITE_HITPICK_DATA;
    private variable var384PosID;
    private variable varTermBC;
    private variable cloneName;
    private variable varTermPosID;
    private variable var384BC;
    private variable var96PosID;
    private variable var96BC;
    private variable sourcePosID;
    private file READ_WORKLIST_FILE;
    private variable day14titer;
    private variable loopcounter;
    private variable SourceVesselType;
    private variable targetVesselType;
    private variable ProcessStep;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    SourceVesselType = "96DW";
    targetVesselType = "96w_FilterPlate";
    ProcessStep = "96DWFB_FilterPlateHitpick";
    WRITE_HITPICK_DATA.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SampleID", cloneName, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SourceBarcode", sourceBarcode, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SourceWell", sourcePosID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SourceVesselType", SourceVesselType, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DestinationBarcode", targetBarcode, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DestinationWell", targetPosID, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DestinationVesselType", targetVesselType, hslString, 255);
    WRITE_HITPICK_DATA.AddField("DateTime", date, hslString, 255);
    WRITE_HITPICK_DATA.AddField("SampleTransferVol", iCultureVolume, hslString, 255);
    WRITE_HITPICK_DATA.AddField("TotalVol", iCultureVolume, hslString, 255);
    WRITE_HITPICK_DATA.AddField("ProcessStep", ProcessStep, hslString, 255);
    WRITE_HITPICK_DATA.SetDelimiter(";");
    if( 0 == WRITE_HITPICK_DATA.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [SampleTrackingTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    arrSize=iArrSampleTrackingFiles.GetSize();
    previousSourceBarcode = Translate("");
    previousTargetBarcode = Translate("");
    previousSourcePosID = Translate("");
    previousTargetPosID = Translate("");
    {
      for(arrIndex = 0; arrIndex < arrSize;)
      {
        arrIndex = arrIndex + 1;
        READ_SAMPLE_TRACKING_FILE.AddField("TRackBC", targetBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TPositionId", targetPosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SRackBC", sourceBarcode, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("SPositionId", sourcePosID, hslString, 255);
        READ_SAMPLE_TRACKING_FILE.AddField("TSumStateDescription", statusSummary, hslString, 255);
        if( 0 == READ_SAMPLE_TRACKING_FILE.Open(iArrSampleTrackingFiles.ElementAt( arrIndex -1) + " " + "ReportMapping$", hslRead, "SELECT DISTINCT [SPositionId], [SRackBC], [TRackBC], [TPositionID], [TSumStateDescription] FROM [ReportMapping]") )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iArrSampleTrackingFiles.ElementAt( arrIndex -1), "HxMetEdCompCmd");
        }
        {
          loopcounter = 0;
          while (
             (READ_SAMPLE_TRACKING_FILE.Eof() == 0)
          )
          {
            loopcounter = loopcounter + 1;
            if( 0 == READ_SAMPLE_TRACKING_FILE.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (statusSummary != "Not used")
            {
              sqlStatement = StrConcat12(Translate("SELECT DISTINCT [384w Plate Barcode], [384w Pos ID], [96w Plate Barcode], [96w Pos ID], [Terminal Study Plate Barcode], [96DW Plate Well ID], [Fed Batch Day 14 Titer (mg/L)] FROM [ExperimentData] WHERE "), Translate("[Terminal Study Plate Barcode] = '"), sourceBarcode, Translate("' AND [96DW Plate Well ID] = '"), sourcePosID, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              READ_WORKLIST_FILE.AddField("384w Plate Barcode", var384BC, hslString, 255);
              READ_WORKLIST_FILE.AddField("384w Pos ID", var384PosID, hslString, 255);
              READ_WORKLIST_FILE.AddField("96w Plate Barcode", var96BC, hslString, 255);
              READ_WORKLIST_FILE.AddField("96w Pos ID", var96PosID, hslString, 255);
              READ_WORKLIST_FILE.AddField("Terminal Study Plate Barcode", varTermBC, hslString, 255);
              READ_WORKLIST_FILE.AddField("96DW Plate Well ID", varTermPosID, hslString, 255);
              READ_WORKLIST_FILE.AddField("Fed Batch Day 14 Titer (mg/L)", day14titer, hslFloat);
              if( 0 == READ_WORKLIST_FILE.Open(iSourceFile + " " + "ExperimentData$", hslRead, sqlStatement) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iSourceFile, "HxMetEdCompCmd");
              }
              if( 0 == READ_WORKLIST_FILE.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (var384BC != "None")
              {
                cloneName = StrConcat4(var384BC, Translate("."), var384PosID, Translate(""));
              }
              else
              {
                cloneName = StrConcat4(var96BC, Translate("."), var96PosID, Translate(""));
              }
              if (sourceBarcode != "----------")
              {
                if( 0 == WRITE_HITPICK_DATA.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
              if( 0 != READ_WORKLIST_FILE.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              READ_WORKLIST_FILE.RemoveFields();
            }
          }
        }
        if( 0 != READ_SAMPLE_TRACKING_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        READ_SAMPLE_TRACKING_FILE.RemoveFields();
        HSLMapReport::DeleteFile(iArrSampleTrackingFiles.ElementAt( arrIndex -1));
      }
    }
    if( 0 != WRITE_HITPICK_DATA.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_HITPICK_DATA.RemoveFields();
  }

  function AddCellDensityMethodToDB( variable iTestPlateBarcode, variable iAssayDay, variable iDilution, variable iDeviceSerialNumber, variable iResultLocation1, variable iAssaySpecificLot1, variable iAssaySpecificLot1Type, variable iAssaySpecificLot2, variable iAssaySpecificLot2Type ) void {
    private variable iTestPlateType;
    private variable AssayType;
    private variable time;
    private variable date;
    private file WRITE_CELLAVISTA_METHOD_TABLE;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    iTestPlateType = "384w";
    AssayType = "CellViability_Hoechst-PI";
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("DateTime", date, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("SampleBarcode", iTestPlateBarcode, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("SampleVesselType", iTestPlateType, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("AssayType", AssayType, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("AssayDay", iAssayDay, hslInteger);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("Dilution", iDilution, hslFloat);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("AssaySpecificLotNum1", iAssaySpecificLot1, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("AssaySpecificLotNum1Type", iAssaySpecificLot1Type, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("AssaySpecificLotNum2", iAssaySpecificLot2, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("AssaySpecificLotNum2Type", iAssaySpecificLot2Type, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("DeviceSerialNumber", iDeviceSerialNumber, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("ResultsLocation1", iResultLocation1, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.SetDelimiter(";");
    if( 0 == WRITE_CELLAVISTA_METHOD_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticMethodTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if(0){
      Trace ("ExperimentID - ",SampleTrackingDB_glExperimentID);
      Trace ("DateTime - ",date);
      Trace ("SampleBC - ",iTestPlateBarcode);
      Trace ("SampleVessel - ",iTestPlateType);
      Trace ("AssayType - ",AssayType);
      Trace ("AssayDay - ",iAssayDay);
      Trace ("Dilution - ",iDilution);
      Trace ("AssayLot1 - ",iAssaySpecificLot1);
      Trace ("AssayLot1Type - ",iAssaySpecificLot1Type);
      Trace ("AssayLot2 - ",iAssaySpecificLot2);
      Trace ("AssayLot2Type - ",iAssaySpecificLot2Type);
      Trace ("CV Serial - ",iDeviceSerialNumber);
      Trace ("ResultLocation - ",iResultLocation1);
    }
    if( 0 == WRITE_CELLAVISTA_METHOD_TABLE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != WRITE_CELLAVISTA_METHOD_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_CELLAVISTA_METHOD_TABLE.RemoveFields();
  }

  function AddConfluenceMethodToDB( variable iTestPlateBarcode, variable iTestPlateType, variable iAssayDay, variable iDeviceSerialNumber, variable iResultLocation1 ) void {
    private variable AssayType;
    private variable time;
    private variable date;
    private file WRITE_CELLAVISTA_METHOD_TABLE;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    date = date + time;
    AssayType = "CellConfluence";
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("DateTime", date, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("SampleBarcode", iTestPlateBarcode, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("SampleVesselType", iTestPlateType, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("AssayType", AssayType, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("AssayDay", iAssayDay, hslInteger);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("DeviceSerialNumber", iDeviceSerialNumber, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.AddField("ResultsLocation1", iResultLocation1, hslString, 255);
    WRITE_CELLAVISTA_METHOD_TABLE.SetDelimiter(";");
    if( 0 == WRITE_CELLAVISTA_METHOD_TABLE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticMethodTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    if( 0 == WRITE_CELLAVISTA_METHOD_TABLE.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != WRITE_CELLAVISTA_METHOD_TABLE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_CELLAVISTA_METHOD_TABLE.RemoveFields();
  }

  private function XAddOctetResultDataToDB_Auto( variable & arrOctetBarcode[], variable & arrOctetDataDir[], variable NumSamplePlates, variable octetDilFactor, variable SampleVesselType ) void {
    private dialog dialogHandle_34;
    private dialog dialogHandle_35;
    private variable iOctetInputFile;
    private variable octetPlateBarcode;
    private variable row;
    private variable shortDir;
    private variable Directory;
    private variable proteinTiterDil2;
    private variable length;
    private variable titerColumn;
    private variable posID;
    private variable lengthMid;
    private variable loopCounter1;
    private variable positionColumn;
    private variable proteinTiterDil;
    private variable start;
    private variable readCounter;
    private variable time;
    private variable proteinTiter;
    private variable date;
    private timer timer3;
    private file WRITE_OCTET_DATA_TO_DB;
    private variable SampleID;
    private variable iResultType;
    private variable iResultUnits;
    private variable AssayType;
    private variable proteinBindingRate;
    private dialog dialogHandle_36;
    private variable BRColumn;
    private file WRITE_OCTET_DATA_TO_DB_BINDINGRATE;
    private variable NumSampleWells;
    private variable NumOctetPlates;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    proteinTiter = 0;
    date = date + time;
    AssayType = "Octet_ProteinA";
    SampleID = "NA";
    if (SampleVesselType == "384w_Octet")
    {
      NumOctetPlates = 1;
      NumSampleWells = NumSamplePlates * 96;
    }
    if (SampleVesselType == "96w_Octet")
    {
      NumOctetPlates = NumSamplePlates;
      NumSampleWells = 96;
    }
    if(0){
      start = 46;
    }
    start = 13;
    WRITE_OCTET_DATA_TO_DB.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("SampleID", SampleID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("SampleBarcode", octetPlateBarcode, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("SampleWell", posID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("SampleVesselType", SampleVesselType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("Result", proteinTiter, hslFloat);
    WRITE_OCTET_DATA_TO_DB.AddField("ResultUnits", iResultUnits, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("RestultType", iResultType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("DateTime", date, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("AssayType", AssayType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.SetDelimiter(";");
    if( 0 == WRITE_OCTET_DATA_TO_DB.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("SampleID", SampleID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("SampleBarcode", octetPlateBarcode, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("SampleWell", posID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("SampleVesselType", SampleVesselType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("Result", proteinBindingRate, hslFloat);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("ResultUnits", iResultUnits, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("RestultType", iResultType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("DateTime", date, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("AssayType", AssayType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.SetDelimiter(";");
    if( 0 == WRITE_OCTET_DATA_TO_DB_BINDINGRATE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    positionColumn = 11;
    titerColumn = 16;
    BRColumn = 14;
    {
      for(loopCounter1 = 0; loopCounter1 < NumOctetPlates;)
      {
        loopCounter1 = loopCounter1 + 1;
        Directory=arrOctetDataDir.GetAt(loopCounter1-1);
        octetPlateBarcode=arrOctetBarcode.GetAt(loopCounter1-1);
        length = StrGetLength(Directory);
        lengthMid = length - start;
        shortDir = StrMid(Directory, start, lengthMid);
        iOctetInputFile = "Z:" + shortDir + "ExcelReport.xls";
        if( 0 == timer3.SetTimer(5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer3.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        MicrosoftExcel::Init();
        MicrosoftExcel::OpenFile(iOctetInputFile);
        TrcTrace(Translate("Octet data file: "), iOctetInputFile);
        MicrosoftExcel::SelectSheet(2);
        row = 39;
        {
          for(readCounter = 0; readCounter < NumSampleWells;)
          {
            readCounter = readCounter + 1;
            onerror goto errLabel_37 ;
            err.Clear();
            MicrosoftExcel::GetCellValue(positionColumn, row, posID);
            errLabel_37 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_35.SetOutput(Translate("Well Error\n"), octetPlateBarcode);
              dialogHandle_35.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
            onerror goto errLabel_38 ;
            err.Clear();
            MicrosoftExcel::GetCellValue(titerColumn, row, proteinTiterDil2);
            errLabel_38 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_34.SetOutput(Translate("Titer Error\n"), octetPlateBarcode);
              dialogHandle_34.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
            proteinTiterDil = StrFVal(proteinTiterDil2);
            proteinTiter = octetDilFactor * proteinTiterDil;
            onerror goto errLabel_39 ;
            err.Clear();
            MicrosoftExcel::GetCellValue(BRColumn, row, proteinBindingRate);
            errLabel_39 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_36.SetOutput(Translate("Binding Rate Error\n"), octetPlateBarcode);
              dialogHandle_36.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
            iResultUnits = "mg/L";
            iResultType = "Titer";
            if( 0 == WRITE_OCTET_DATA_TO_DB.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            iResultUnits = "NA";
            iResultType = "Binding Rate";
            if( 0 == WRITE_OCTET_DATA_TO_DB_BINDINGRATE.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            row = row + 1;
          }
        }
        MicrosoftExcel::End();
      }
    }
    if( 0 != WRITE_OCTET_DATA_TO_DB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_OCTET_DATA_TO_DB.RemoveFields();
    if( 0 != WRITE_OCTET_DATA_TO_DB_BINDINGRATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.RemoveFields();
  }

  function AddOctetProAResultDataToDB_Manual( variable octetPlateBarcode, variable iOctetInputFile, variable NumSamplePlates, variable SampleVesselType ) void {
    private variable SampleID;
    private variable iResultType;
    private variable NumSampleWells;
    private variable iResultUnits;
    private variable AssayType;
    private variable loopCounter1;
    private variable NumOctetPlates;
    private variable time;
    private variable date;
    private timer timer3;
    private file WRITE_OCTET_DATA_TO_DB_BINDINGRATE;
    private file WRITE_OCTET_DATA_TO_DB;
    private variable flt_Concentration;
    private variable loopCounter_OctetRead;
    private variable flt_BindingRate;
    private variable str_BindingRate;
    private variable str_Well;
    private variable str_Concentration;
    private file OCTET_RESULT_FILE_READ;
    private variable int_Convert;
    date = TimGetFormattedDate(Translate("%m/%d/%y "));
    time = TimGetFormattedTime(Translate("%I:%M:%S %p"));
    flt_Concentration = 0;
    flt_BindingRate = 0;
    date = date + time;
    AssayType = "Octet_ProteinA";
    SampleID = "NA";
    if (SampleVesselType == "384w_Octet")
    {
      NumOctetPlates = 1;
      NumSampleWells = NumSamplePlates * 96;
      NumSampleWells = NumSampleWells + 1;
    }
    if(0){
      if (SampleVesselType == "96w_Octet")
      {
        NumOctetPlates = NumSamplePlates;
        NumSampleWells = 96;
      }
    }
    WRITE_OCTET_DATA_TO_DB.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("SampleID", SampleID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("SampleBarcode", octetPlateBarcode, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("SampleWell", str_Well, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("SampleVesselType", SampleVesselType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("Result", flt_Concentration, hslFloat);
    WRITE_OCTET_DATA_TO_DB.AddField("ResultUnits", iResultUnits, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("ResultType", iResultType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("DateTime", date, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.AddField("AssayType", AssayType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB.SetDelimiter(";");
    if( 0 == WRITE_OCTET_DATA_TO_DB.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("ExperimentID", SampleTrackingDB_glExperimentID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("SampleID", SampleID, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("SampleBarcode", octetPlateBarcode, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("SampleWell", str_Well, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("SampleVesselType", SampleVesselType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("Result", flt_BindingRate, hslFloat);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("ResultUnits", iResultUnits, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("ResultType", iResultType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("DateTime", date, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.AddField("AssayType", AssayType, hslString, 255);
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.SetDelimiter(";");
    if( 0 == WRITE_OCTET_DATA_TO_DB_BINDINGRATE.Open(SampleTrackingDB_glDBName, hslAppend, "SELECT * FROM [AnalyticResultTable]", SampleTrackingDB_glConnectionString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
    }
    {
      for(loopCounter1 = 0; loopCounter1 < NumOctetPlates;)
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == timer3.SetTimer(5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        OCTET_RESULT_FILE_READ.SetExtendedProperties( "HDR=NO");
        OCTET_RESULT_FILE_READ.AddField(6, str_Well, hslString, 255);
        OCTET_RESULT_FILE_READ.AddField(9, str_BindingRate, hslString, 255);
        OCTET_RESULT_FILE_READ.AddField(13, str_Concentration, hslString, 255);
        OCTET_RESULT_FILE_READ.SetDelimiter(hslCSVDelimited);
        if( 0 == OCTET_RESULT_FILE_READ.Open(iOctetInputFile, hslRead) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, iOctetInputFile, "HxMetEdCompCmd");
        }
        {
          for(loopCounter_OctetRead = 0; loopCounter_OctetRead < NumSampleWells;)
          {
            loopCounter_OctetRead = loopCounter_OctetRead + 1;
            if( 0 == OCTET_RESULT_FILE_READ.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (loopCounter_OctetRead != 1)
            {
              onerror goto errLabel_40 ;
              err.Clear();
              flt_BindingRate = StrFVal(str_BindingRate);
              errLabel_40 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                TrcTrace(Translate("Binding Rate Empty"), Translate(""));
                flt_BindingRate = 0.0;
              }   /* end if from skip handler if no error */
              onerror goto errLabel_41 ;
              err.Clear();
              int_Convert = 1;
              if (str_Concentration == "Too High")
              {
                TrcTrace(Translate("Concentration Too High"), Translate(""));
                flt_Concentration = 99999.99;
                int_Convert = 0;
              }
              if (str_Concentration == "Too Low")
              {
                TrcTrace(Translate("Concentration Too Low"), Translate(""));
                flt_Concentration = 0.1;
                int_Convert = 0;
              }
              if (int_Convert == 1)
              {
                flt_Concentration = StrFVal(str_Concentration);
              }
              errLabel_41 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                TrcTrace(Translate("Concentration Empty"), Translate(""));
                flt_Concentration = 0.0;
              }   /* end if from skip handler if no error */
              TrcTrace12(Translate("Well - "), str_Well, Translate(" -- BR - "), flt_BindingRate, Translate(" -- Conc - "), flt_Concentration, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              iResultUnits = "mg/L";
              iResultType = "Titer";
              if( 0 == WRITE_OCTET_DATA_TO_DB.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              iResultUnits = "NA";
              iResultType = "Binding Rate";
              if( 0 == WRITE_OCTET_DATA_TO_DB_BINDINGRATE.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
        if( 0 != OCTET_RESULT_FILE_READ.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        OCTET_RESULT_FILE_READ.RemoveFields();
      }
    }
    if( 0 != WRITE_OCTET_DATA_TO_DB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_OCTET_DATA_TO_DB.RemoveFields();
    if( 0 != WRITE_OCTET_DATA_TO_DB_BINDINGRATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WRITE_OCTET_DATA_TO_DB_BINDINGRATE.RemoveFields();
  }

  function ConfluencePlateLookup( variable i_int_QueryType, variable i_int_numConfPlates, variable i_str_platetype, variable & i_arr_LiconicBCList[], variable & o_arr_confluencebarcodes[], variable & str_BarcodeList, variable & o_int_ConfluencePlatesInDB, variable & o_int_GoodFlag ) void {
    private variable sqlStatement;
    private variable confluencePlateBarcode;
    private variable loopCounter1;
    private file READ_CONFLUENCE_PLATES;
    private variable str_barcode;
    private variable int_error;
    str_BarcodeList = 0;
    o_int_ConfluencePlatesInDB = 0;
    o_int_GoodFlag = 0;
    o_int_GoodFlag = 1;
    if (i_int_QueryType == 0)
    {
      o_arr_confluencebarcodes.SetSize(0);
      sqlStatement = "SELECT DISTINCT  ExperimentID, SampleBarcode, SampleVesselType, AssayType FROM AnalyticMethodTable " +
      "WHERE ExperimentID = '" + SampleTrackingDB_glExperimentID + "' AND SampleVesselType = '" + i_str_platetype + "' AND AssayType = 'CellConfluence'";
      Trace("sqlStatement = ", sqlStatement);
      READ_CONFLUENCE_PLATES.AddField("SampleBarcode", confluencePlateBarcode, hslString, 255);
      READ_CONFLUENCE_PLATES.SetDelimiter(";");
      if( 0 == READ_CONFLUENCE_PLATES.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
      }
      {
        loopCounter1 = 0;
        while (
           (READ_CONFLUENCE_PLATES.Eof() == 0)
        )
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == READ_CONFLUENCE_PLATES.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          o_arr_confluencebarcodes.AddAsLast(confluencePlateBarcode);
        }
      }
      if( 0 != READ_CONFLUENCE_PLATES.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      READ_CONFLUENCE_PLATES.RemoveFields();
      o_int_ConfluencePlatesInDB=o_arr_confluencebarcodes.GetSize();
    }
    if (i_int_QueryType == 1)
    {
      int_error = 0;
      {
        for(loopCounter1 = 0; loopCounter1 < i_int_numConfPlates;)
        {
          loopCounter1 = loopCounter1 + 1;
          o_arr_confluencebarcodes.SetSize(0);
          str_barcode=i_arr_LiconicBCList.GetAt(loopCounter1-1);
          onerror goto errLabel_42 ;
          err.Clear();
          sqlStatement = "SELECT DISTINCT  ExperimentID, SampleBarcode, SampleVesselType, AssayType FROM AnalyticMethodTable " +
          "WHERE ExperimentID = '" + SampleTrackingDB_glExperimentID + "' AND SampleBarcode = '" + str_barcode +
          "' AND SampleVesselType = '" + i_str_platetype + "' AND AssayType = 'CellConfluence'";
          Trace("sqlStatement = ", sqlStatement);
          READ_CONFLUENCE_PLATES.AddField("SampleBarcode", confluencePlateBarcode, hslString, 255);
          READ_CONFLUENCE_PLATES.SetDelimiter(";");
          if( 0 == READ_CONFLUENCE_PLATES.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
          }
          if( 0 == READ_CONFLUENCE_PLATES.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          o_arr_confluencebarcodes.AddAsLast(confluencePlateBarcode);
          if( 0 != READ_CONFLUENCE_PLATES.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          READ_CONFLUENCE_PLATES.RemoveFields();
          errLabel_42 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            if( 0 != READ_CONFLUENCE_PLATES.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            READ_CONFLUENCE_PLATES.RemoveFields();
            int_error = int_error + 1;
            if (int_error == 1)
            {
              str_BarcodeList = str_barcode;
            }
            else
            {
              str_BarcodeList = StrConcat4(str_BarcodeList, Translate(", "), str_barcode, Translate(""));
            }
            o_int_GoodFlag = 0;
          }   /* end if from skip handler if no error */
        }
      }
      o_int_ConfluencePlatesInDB=o_arr_confluencebarcodes.GetSize();
    }
  }

  function DDI_Confluence( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_int_WellNum ) void {
    private variable int_BarcodeArraySize;
    private variable str_Well_ID;
    private variable str_DDIFileName;
    private variable LC_BarcodeArraySize;
    private variable str_Time;
    private variable flt_Confluence;
    private variable str_Date;
    private variable str_sqlQuery;
    private variable LC_DBRead;
    private variable str_Barcode;
    private variable str_DDIFolder;
    private variable str_TimeForDDiFile;
    private variable str_DateTimeForDDiFile;
    private variable str_DateForDDiFile;
    private file hnd_DDiFileToWriteTo;
    private file hnd_ReadDatabaseFile;
    private variable str_FilePathSchema;
    private variable bln_Schema;
    private variable blnPuma;
    MECC::TraceComment(Translate("############################################\n             DDi CONFLUENCE FILE TRIGGER: START\n############################################"));
    str_DDIFolder = Translate("C:\\DataCapture\\upload\\");
    str_Date = TimGetFormattedDate(Translate("_%Y-%m-%d "));
    str_Time = TimGetFormattedTime(Translate("%H-%M-%S"));
    str_DDIFileName = StrConcat8(str_DDIFolder, Translate("CONF_"), i_str_ExperimentID, str_Date, str_Time, Translate(".csv"), Translate(""), Translate(""));
    TrcTrace(Translate("str_DDIFileName = "), str_DDIFileName);
    str_DateForDDiFile = TimGetFormattedDate(Translate("%Y-%m-%d"));
    str_TimeForDDiFile = TimGetFormattedTime(Translate("%H:%M:%S"));
    str_DateTimeForDDiFile = StrConcat4(str_DateForDDiFile, Translate(" "), str_TimeForDDiFile, Translate(""));
    int_BarcodeArraySize=i_arr_Barcodes.GetSize();
    TrcTrace(Translate("int_BarcodeArraySize = "), int_BarcodeArraySize);
    hnd_DDiFileToWriteTo.SetExtendedProperties( "HDR=NO");
    hnd_DDiFileToWriteTo.AddField("Container Barcode", str_Barcode, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Container Position", str_Well_ID, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Cell Confluence", flt_Confluence, hslFloat);
    hnd_DDiFileToWriteTo.AddField("Time", str_DateTimeForDDiFile, hslString, 255);
    hnd_DDiFileToWriteTo.SetDelimiter(hslCSVDelimited);
    if( 0 == hnd_DDiFileToWriteTo.Open(str_DDIFileName, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_DDIFileName, "HxMetEdCompCmd");
    }
    {
      for(LC_BarcodeArraySize = 0; LC_BarcodeArraySize < int_BarcodeArraySize;)
      {
        LC_BarcodeArraySize = LC_BarcodeArraySize + 1;
        str_Barcode=i_arr_Barcodes.GetAt(LC_BarcodeArraySize-1);
        str_sqlQuery = StrConcat12(Translate("SELECT TOP ("), i_int_WellNum, Translate(") [ExperimentID], [DateTime], [SampleBarcode], [SampleWell], [SampleVesselType], [AssayType], [Result], [ResultType] FROM [MEDIMMUNESAMPLETRACKINGDB_2014_Data].[dbo].[AnalyticResultTable] where ExperimentID = '"), i_str_ExperimentID, Translate("' AND SampleBarcode = '"), str_Barcode, Translate("' AND ResultType = 'Confluence' ORDER BY DateTime DESC"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        TrcTrace(Translate("sql Query - "), str_sqlQuery);
        hnd_ReadDatabaseFile.AddField("Result", flt_Confluence, hslFloat);
        hnd_ReadDatabaseFile.AddField("SampleWell", str_Well_ID, hslString, 255);
        hnd_ReadDatabaseFile.SetDelimiter(hslCSVDelimited);
        if( 0 == hnd_ReadDatabaseFile.Open(SampleTrackingDB_glDBName, hslRead, str_sqlQuery, SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
        {
          LC_DBRead = 0;
          while (
             (hnd_ReadDatabaseFile.Eof() == 0)
          )
          {
            LC_DBRead = LC_DBRead + 1;
            if( 0 == hnd_ReadDatabaseFile.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == hnd_DDiFileToWriteTo.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != hnd_ReadDatabaseFile.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        hnd_ReadDatabaseFile.RemoveFields();
      }
    }
    if( 0 != hnd_DDiFileToWriteTo.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hnd_DDiFileToWriteTo.RemoveFields();
    str_FilePathSchema = Translate("C:\\DataCapture\\upload\\schema.ini");
    bln_Schema = FileDirectoryLib::CheckIfFileExists(str_FilePathSchema);
    if (bln_Schema == 1)
    {
      FileDirectoryLib::DeleteFile(str_FilePathSchema);
      MECC::TraceComment(Translate("Schema.ini deleted"));
    }
    else
    {
      MECC::TraceComment(Translate("Schema.ini not found"));
    }
    RemoveTextDelimitersFromAsciiTextFile(str_DDIFileName);
    MECC::TraceComment(Translate("DDi Trigger Start"));
    {
      event localDummyEvent1;
      if( 0 == Shell("C:\\DataCapture\\DataCaptureStart.bat", hslShow, hslSynchronous, localDummyEvent1, blnPuma) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    MECC::TraceComment(Translate("DDi Trigger Complete"));
    MECC::TraceComment(Translate("############################################\n             DDi CONFLUENCE FILE TRIGGER: END\n############################################"));
  }

  function DDI_ViableCellCount( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_int_WellNum ) void {
    private variable flt_TCD;
    private variable int_BarcodeArraySize;
    private variable flt_VCD;
    private variable str_DDIFolder;
    private variable str_Well_ID;
    private variable flt_Viability;
    private variable str_DBTime;
    private variable str_DDIFileName;
    private variable LC_BarcodeArraySize;
    private variable str_Time;
    private variable str_Date;
    private variable str_sqlQuery;
    private variable LC_DBRead;
    private variable str_Barcode;
    private variable str_sqlQueryTCD;
    private variable str_sqlQueryVCD;
    private variable str_sqlQueryViability;
    private file FILE_READDBTCD;
    private file FILE_READDBVCD;
    private file FILE_READDBVia;
    private variable str_sqlQueryHoechstPI;
    private variable str_TimeForDDiFile;
    private variable str_DateTimeForDDiFile;
    private variable str_DateForDDiFile;
    private file hnd_DDiFileToWriteTo;
    private file hnd_ReadDatabaseFile;
    private variable bln_Schema;
    private variable str_FilePathSchema;
    private variable blnPuma;
    MECC::TraceComment(Translate("##################################################\n             DDi VIABLE CELL COUNT FILE TRIGGER: START\n##################################################"));
    str_DDIFolder = Translate("C:\\DataCapture\\upload\\");
    str_Date = TimGetFormattedDate(Translate("_%Y-%m-%d "));
    str_Time = TimGetFormattedTime(Translate("%H-%M-%S"));
    str_DDIFileName = StrConcat8(str_DDIFolder, Translate("CELL_"), i_str_ExperimentID, str_Date, str_Time, Translate(".csv"), Translate(""), Translate(""));
    TrcTrace(Translate("str_DDIFileName = "), str_DDIFileName);
    str_DateForDDiFile = TimGetFormattedDate(Translate("%Y-%m-%d"));
    str_TimeForDDiFile = TimGetFormattedTime(Translate("%H:%M:%S"));
    str_DateTimeForDDiFile = StrConcat4(str_DateForDDiFile, Translate(" "), str_TimeForDDiFile, Translate(""));
    int_BarcodeArraySize=i_arr_Barcodes.GetSize();
    TrcTrace(Translate("int_BarcodeArraySize = "), int_BarcodeArraySize);
    hnd_DDiFileToWriteTo.AddField("Container Barcode", str_Barcode, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Container Position", str_Well_ID, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("TCD", flt_TCD, hslFloat);
    hnd_DDiFileToWriteTo.AddField("VCD", flt_VCD, hslFloat);
    hnd_DDiFileToWriteTo.AddField("Viability", flt_Viability, hslFloat);
    hnd_DDiFileToWriteTo.AddField("Time", str_DateTimeForDDiFile, hslString, 255);
    hnd_DDiFileToWriteTo.SetDelimiter(hslCSVDelimited);
    if( 0 == hnd_DDiFileToWriteTo.Open(str_DDIFileName, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_DDIFileName, "HxMetEdCompCmd");
    }
    {
      for(LC_BarcodeArraySize = 0; LC_BarcodeArraySize < int_BarcodeArraySize;)
      {
        LC_BarcodeArraySize = LC_BarcodeArraySize + 1;
        str_Barcode=i_arr_Barcodes.GetAt(LC_BarcodeArraySize-1);
        str_sqlQueryHoechstPI = StrConcat12(Translate("SELECT TOP ("), i_int_WellNum, Translate(") PivotTable.[ExperimentID],PivotTable.[SampleID],PivotTable.[DateTime],PivotTable.[SampleBarcode],PivotTable.[SampleWell],PivotTable.[SampleVesselType],PivotTable.[AssayType],PivotTable.[TCD] as Result_TCD, PivotTable.[VCD] as Result_VCD, PivotTable.[VIABILITY] as Result_Viability "), Translate("FROM (SELECT [ExperimentID],[SampleID],[DateTime],[SampleBarcode],[SampleWell],[SampleVesselType],[AssayType], ResultType, Result "), Translate("FROM [MEDIMMUNESAMPLETRACKINGDB_2014_Data].[dbo].[AnalyticResultTable]) AS T  "), Translate("PIVOT  (MAX(Result) FOR ResultType IN ([TCD], [VCD], [Viability])) AS PivotTable "), Translate("WHERE ExperimentID = '"), i_str_ExperimentID, Translate("' AND SampleBarcode ='"), str_Barcode, Translate("' AND AssayType = 'CellViability_Hoechst-PI' ORDER BY DateTime DESC"), Translate(""));
        TrcTrace(Translate("sql Query - "), str_sqlQueryHoechstPI);
        hnd_ReadDatabaseFile.AddField("Result_TCD", flt_TCD, hslFloat);
        hnd_ReadDatabaseFile.AddField("Result_VCD", flt_VCD, hslFloat);
        hnd_ReadDatabaseFile.AddField("Result_Viability", flt_Viability, hslFloat);
        hnd_ReadDatabaseFile.AddField("SampleWell", str_Well_ID, hslString, 255);
        hnd_ReadDatabaseFile.SetDelimiter(hslCSVDelimited);
        if( 0 == hnd_ReadDatabaseFile.Open(SampleTrackingDB_glDBName, hslRead, str_sqlQueryHoechstPI, SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
        if(0){
          str_sqlQueryTCD = StrConcat12(Translate("SELECT TOP ("), i_int_WellNum, Translate(") [ExperimentID], [DateTime], [SampleBarcode], [SampleWell], [SampleVesselType], [AssayType], [Result], [ResultType] FROM [MEDIMMUNESAMPLETRACKINGDB_2014_Data].[dbo].[AnalyticResultTable] where ExperimentID = '"), i_str_ExperimentID, Translate("' AND SampleBarcode = '"), str_Barcode, Translate("' AND AssayType = 'CellViability_Hoechst-PI' AND ResultType = 'TCD' ORDER BY DateTime DESC"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          TrcTrace(Translate("sql Query - "), str_sqlQueryTCD);
          str_sqlQueryVCD = StrConcat12(Translate("SELECT TOP ("), i_int_WellNum, Translate(") [ExperimentID], [DateTime], [SampleBarcode], [SampleWell], [SampleVesselType], [AssayType], [Result], [ResultType] FROM [MEDIMMUNESAMPLETRACKINGDB_2014_Data].[dbo].[AnalyticResultTable] where ExperimentID = '"), i_str_ExperimentID, Translate("' AND SampleBarcode = '"), str_Barcode, Translate("' AND AssayType = 'CellViability_Hoechst-PI' AND ResultType = 'VCD' ORDER BY DateTime DESC"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          TrcTrace(Translate("sql Query - "), str_sqlQueryVCD);
          str_sqlQueryViability = StrConcat12(Translate("SELECT TOP ("), i_int_WellNum, Translate(") [ExperimentID], [DateTime], [SampleBarcode], [SampleWell], [SampleVesselType], [AssayType], [Result], [ResultType] FROM [MEDIMMUNESAMPLETRACKINGDB_2014_Data].[dbo].[AnalyticResultTable] where ExperimentID = '"), i_str_ExperimentID, Translate("' AND SampleBarcode = '"), str_Barcode, Translate("' AND AssayType = 'CellViability_Hoechst-PI' AND ResultType = 'Viability' ORDER BY DateTime DESC"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          TrcTrace(Translate("sql Query - "), str_sqlQueryTCD);
          FILE_READDBTCD.AddField("Result", flt_TCD, hslFloat);
          FILE_READDBTCD.AddField("DateTime", str_DBTime, hslString, 255);
          FILE_READDBTCD.AddField("SampleWell", str_Well_ID, hslString, 255);
          FILE_READDBTCD.SetDelimiter(";");
          if( 0 == FILE_READDBTCD.Open(SampleTrackingDB_glDBName, hslRead, str_sqlQueryTCD, SampleTrackingDB_glConnectionString) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
          }
          FILE_READDBVCD.AddField("Result", flt_VCD, hslFloat);
          FILE_READDBVCD.AddField("DateTime", str_DBTime, hslString, 255);
          FILE_READDBVCD.AddField("SampleWell", str_Well_ID, hslString, 255);
          FILE_READDBVCD.SetDelimiter(";");
          if( 0 == FILE_READDBVCD.Open(SampleTrackingDB_glDBName, hslRead, str_sqlQuery, SampleTrackingDB_glConnectionString) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
          }
          FILE_READDBVia.AddField("Result", flt_Viability, hslFloat);
          FILE_READDBVia.AddField("DateTime", str_DBTime, hslString, 255);
          FILE_READDBVia.AddField("SampleWell", str_Well_ID, hslString, 255);
          FILE_READDBVia.SetDelimiter(";");
          if( 0 == FILE_READDBVia.Open(SampleTrackingDB_glDBName, hslRead, str_sqlQuery, SampleTrackingDB_glConnectionString) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
          }
        }
        {
          LC_DBRead = 0;
          while (
             (hnd_ReadDatabaseFile.Eof() == 0)
          )
          {
            LC_DBRead = LC_DBRead + 1;
            if( 0 == hnd_ReadDatabaseFile.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if(0){
              if( 0 == FILE_READDBTCD.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == FILE_READDBVCD.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == FILE_READDBVia.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
            if( 0 == hnd_DDiFileToWriteTo.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != hnd_ReadDatabaseFile.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        hnd_ReadDatabaseFile.RemoveFields();
        if(0){
          if( 0 != FILE_READDBTCD.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          FILE_READDBTCD.RemoveFields();
          if( 0 != FILE_READDBVCD.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          FILE_READDBVCD.RemoveFields();
          if( 0 != FILE_READDBVia.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          FILE_READDBVia.RemoveFields();
        }
      }
    }
    if( 0 != hnd_DDiFileToWriteTo.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hnd_DDiFileToWriteTo.RemoveFields();
    str_FilePathSchema = Translate("C:\\DataCapture\\upload\\schema.ini");
    bln_Schema = FileDirectoryLib::CheckIfFileExists(str_FilePathSchema);
    if (bln_Schema == 1)
    {
      FileDirectoryLib::DeleteFile(str_FilePathSchema);
      MECC::TraceComment(Translate("Schema.ini deleted"));
    }
    else
    {
      MECC::TraceComment(Translate("Schema.ini not found"));
    }
    RemoveTextDelimitersFromAsciiTextFile(str_DDIFileName);
    {
      event localDummyEvent1;
      if( 0 == Shell("C:\\DataCapture\\DataCaptureStart.bat", hslShow, hslSynchronous, localDummyEvent1, blnPuma) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    MECC::TraceComment(Translate("##################################################\n             DDi VIABLE CELL COUNT FILE TRIGGER: END\n##################################################"));
  }

  function DDI_CriticalReagents( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_str_ReagentName, variable i_str_ReagentLot, variable i_int_WellNum, variable i_str_ProcessStep ) void {
    private variable int_BarcodeArraySize;
    private variable str_DDIFolder;
    private variable str_Well_ID;
    private variable str_DDIFileName;
    private variable LC_BarcodeArraySize;
    private variable str_Time;
    private variable str_Date;
    private variable LC_DBRead;
    private variable str_sqlQuery;
    private variable flt_ReagentVol;
    private variable str_Barcode;
    private variable str_TimeForDDiFile;
    private variable str_DateTimeForDDiFile;
    private variable str_DateForDDiFile;
    private file hnd_DDiFileToWriteTo;
    private file hnd_ReadDatabaseFile;
    private variable bln_Schema;
    private variable str_FilePathSchema;
    private variable blnPuma;
    MECC::TraceComment(Translate("##################################################\n             DDi CRITICAL REAGENTS FILE TRIGGER: START\n##################################################"));
    str_DDIFolder = Translate("C:\\DataCapture\\upload\\");
    str_Date = TimGetFormattedDate(Translate("_%Y-%m-%d "));
    str_Time = TimGetFormattedTime(Translate("%H-%M-%S"));
    str_DDIFileName = StrConcat8(str_DDIFolder, Translate("RT_"), i_str_ExperimentID, str_Date, str_Time, Translate(".csv"), Translate(""), Translate(""));
    TrcTrace(Translate("str_DDIFileName = "), str_DDIFileName);
    str_DateForDDiFile = TimGetFormattedDate(Translate("%Y-%m-%d"));
    str_TimeForDDiFile = TimGetFormattedTime(Translate("%H:%M:%S"));
    str_DateTimeForDDiFile = StrConcat4(str_DateForDDiFile, Translate(" "), str_TimeForDDiFile, Translate(""));
    int_BarcodeArraySize=i_arr_Barcodes.GetSize();
    TrcTrace(Translate("int_BarcodeArraySize = "), int_BarcodeArraySize);
    hnd_DDiFileToWriteTo.SetExtendedProperties( "HDR=NO");
    hnd_DDiFileToWriteTo.AddField("Destination Container", str_Barcode, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Destination Position", str_Well_ID, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Reagent Name", i_str_ReagentName, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Reagent Batch", i_str_ReagentLot, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Reagent Volume", flt_ReagentVol, hslFloat);
    hnd_DDiFileToWriteTo.AddField("Time", str_DateTimeForDDiFile, hslString, 255);
    hnd_DDiFileToWriteTo.SetDelimiter(hslCSVDelimited);
    if( 0 == hnd_DDiFileToWriteTo.Open(str_DDIFileName, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_DDIFileName, "HxMetEdCompCmd");
    }
    {
      for(LC_BarcodeArraySize = 0; LC_BarcodeArraySize < int_BarcodeArraySize;)
      {
        LC_BarcodeArraySize = LC_BarcodeArraySize + 1;
        str_Barcode=i_arr_Barcodes.GetAt(LC_BarcodeArraySize-1);
        str_sqlQuery = StrConcat12(Translate("SELECT TOP ("), i_int_WellNum, Translate(") [ExperimentID],[DateTime],[SourceBarcode],[SourceWell],[SourceVesselType],[DestinationBarcode],[DestinationWell],[DestinationVesselType],[TotalVol],[SampleTransferVol],[Reagent1Vol],[Reagent1ID],[Reagent1Lot],[Reagent2Vol],[Reagent2ID],[Reagent2Lot],[ProcessStep] FROM [MEDIMMUNESAMPLETRACKINGDB_2014_Data].[dbo].[SampleTrackingTable] where ExperimentID='"), i_str_ExperimentID, Translate("' AND DestinationBarcode='"), str_Barcode, Translate("' AND Reagent1ID='"), i_str_ReagentName, Translate("' AND Reagent1Lot ='"), i_str_ReagentLot, Translate("' AND ProcessStep ='"), i_str_ProcessStep);
        str_sqlQuery = StrConcat4(str_sqlQuery, Translate("' order by DateTime DESC"), Translate(""), Translate(""));
        TrcTrace(Translate("sql Query - "), str_sqlQuery);
        hnd_ReadDatabaseFile.AddField("Reagent1Vol", flt_ReagentVol, hslFloat);
        hnd_ReadDatabaseFile.AddField("DestinationWell", str_Well_ID, hslString, 255);
        hnd_ReadDatabaseFile.SetDelimiter(hslCSVDelimited);
        if( 0 == hnd_ReadDatabaseFile.Open(SampleTrackingDB_glDBName, hslRead, str_sqlQuery, SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
        {
          LC_DBRead = 0;
          while (
             (hnd_ReadDatabaseFile.Eof() == 0)
          )
          {
            LC_DBRead = LC_DBRead + 1;
            if( 0 == hnd_ReadDatabaseFile.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == hnd_DDiFileToWriteTo.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != hnd_ReadDatabaseFile.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        hnd_ReadDatabaseFile.RemoveFields();
      }
    }
    if( 0 != hnd_DDiFileToWriteTo.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hnd_DDiFileToWriteTo.RemoveFields();
    str_FilePathSchema = Translate("C:\\DataCapture\\upload\\schema.ini");
    bln_Schema = FileDirectoryLib::CheckIfFileExists(str_FilePathSchema);
    if (bln_Schema == 1)
    {
      FileDirectoryLib::DeleteFile(str_FilePathSchema);
      MECC::TraceComment(Translate("Schema.ini deleted"));
    }
    else
    {
      MECC::TraceComment(Translate("Schema.ini not found"));
    }
    RemoveTextDelimitersFromAsciiTextFile(str_DDIFileName);
    MECC::TraceComment(Translate("DDi Trigger Start"));
    {
      event localDummyEvent1;
      if( 0 == Shell("C:\\DataCapture\\DataCaptureStart.bat", hslShow, hslSynchronous, localDummyEvent1, blnPuma) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    MECC::TraceComment(Translate("DDi Trigger Complete"));
    MECC::TraceComment(Translate("##################################################\n             DDi CRITICAL REAGENTS FILE TRIGGER: END\n##################################################"));
  }

  function DDI_SampleTransfer( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_int_DestWellNum, variable i_int_SourcetWellNum, variable i_str_ProcessStep ) void {
    private variable int_BarcodeArraySize;
    private variable str_DDIFolder;
    private variable str_DDIFileName;
    private variable LC_BarcodeArraySize;
    private variable str_Time;
    private variable str_Date;
    private variable LC_DBRead;
    private variable str_sqlQuery;
    private variable str_SourceWell_ID;
    private variable str_DestWell_ID;
    private variable str_SourceBarcode;
    private variable flt_Vol;
    private variable str_DestBarcode;
    private variable str_TimeForDDiFile;
    private variable str_DateTimeForDDiFile;
    private variable str_DateForDDiFile;
    private file hnd_DDiFileToWriteTo;
    private file hnd_ReadDatabaseFile;
    private variable bln_Schema;
    private variable str_FilePathSchema;
    private variable blnPuma;
    MECC::TraceComment(Translate("##################################################\n             DDi SAMPLE TRANSFER FILE TRIGGER: START\n##################################################"));
    str_DDIFolder = Translate("C:\\DataCapture\\upload\\");
    int_BarcodeArraySize=i_arr_Barcodes.GetSize();
    TrcTrace(Translate("int_BarcodeArraySize = "), int_BarcodeArraySize);
    {
      for(LC_BarcodeArraySize = 0; LC_BarcodeArraySize < int_BarcodeArraySize;)
      {
        LC_BarcodeArraySize = LC_BarcodeArraySize + 1;
        str_DestBarcode=i_arr_Barcodes.GetAt(LC_BarcodeArraySize-1);
        str_Date = TimGetFormattedDate(Translate("_%Y-%m-%d "));
        str_Time = TimGetFormattedTime(Translate("%H-%M-%S"));
        str_DDIFileName = StrConcat8(str_DDIFolder, Translate("ST_"), str_DestBarcode, Translate("_"), i_str_ExperimentID, str_Date, str_Time, Translate(".csv"));
        TrcTrace(Translate("str_DDIFileName = "), str_DDIFileName);
        str_DateForDDiFile = TimGetFormattedDate(Translate("%Y-%m-%d"));
        str_TimeForDDiFile = TimGetFormattedTime(Translate("%H:%M:%S"));
        str_DateTimeForDDiFile = StrConcat4(str_DateForDDiFile, Translate(" "), str_TimeForDDiFile, Translate(""));
        hnd_DDiFileToWriteTo.SetExtendedProperties( "HDR=NO");
        hnd_DDiFileToWriteTo.AddField("Destination Container", str_DestBarcode, hslString, 255);
        hnd_DDiFileToWriteTo.AddField("Destination Position", str_DestWell_ID, hslString, 255);
        hnd_DDiFileToWriteTo.AddField("Destination Size", i_int_DestWellNum, hslInteger);
        hnd_DDiFileToWriteTo.AddField("Source Container", str_SourceBarcode, hslString, 255);
        hnd_DDiFileToWriteTo.AddField("Source Position", str_SourceWell_ID, hslString, 255);
        hnd_DDiFileToWriteTo.AddField("Source Size", i_int_SourcetWellNum, hslInteger);
        hnd_DDiFileToWriteTo.AddField("Volume", flt_Vol, hslFloat);
        hnd_DDiFileToWriteTo.AddField("Time", str_DateTimeForDDiFile, hslString, 255);
        hnd_DDiFileToWriteTo.SetDelimiter(hslCSVDelimited);
        if( 0 == hnd_DDiFileToWriteTo.Open(str_DDIFileName, hslAppend) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_DDIFileName, "HxMetEdCompCmd");
        }
        str_sqlQuery = StrConcat12(Translate("SELECT TOP ("), i_int_DestWellNum, Translate(") [ExperimentID],[DateTime],[SourceBarcode],[SourceWell],[SourceVesselType],[DestinationBarcode],[DestinationWell],[DestinationVesselType],[TotalVol],[SampleTransferVol],[Reagent1Vol],[Reagent1ID],[Reagent1Lot],[Reagent2Vol],[Reagent2ID],[Reagent2Lot],[ProcessStep] FROM [MEDIMMUNESAMPLETRACKINGDB_2014_Data].[dbo].[SampleTrackingTable] where ExperimentID='"), i_str_ExperimentID, Translate("' AND DestinationBarcode='"), str_DestBarcode, Translate("' AND ProcessStep ='"), i_str_ProcessStep, Translate("' order by DateTime DESC"), Translate(""), Translate(""), Translate(""));
        TrcTrace(Translate("sql Query - "), str_sqlQuery);
        hnd_ReadDatabaseFile.AddField("DestinationWell", str_DestWell_ID, hslString, 255);
        hnd_ReadDatabaseFile.AddField("SourceBarcode", str_SourceBarcode, hslString, 255);
        hnd_ReadDatabaseFile.AddField("SourceWell", str_SourceWell_ID, hslString, 255);
        hnd_ReadDatabaseFile.AddField("SampleTransferVol", flt_Vol, hslFloat);
        hnd_ReadDatabaseFile.SetDelimiter(hslCSVDelimited);
        if( 0 == hnd_ReadDatabaseFile.Open(SampleTrackingDB_glDBName, hslRead, str_sqlQuery, SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
        {
          LC_DBRead = 0;
          while (
             (hnd_ReadDatabaseFile.Eof() == 0)
          )
          {
            LC_DBRead = LC_DBRead + 1;
            if( 0 == hnd_ReadDatabaseFile.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == hnd_DDiFileToWriteTo.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != hnd_ReadDatabaseFile.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        hnd_ReadDatabaseFile.RemoveFields();
        if( 0 != hnd_DDiFileToWriteTo.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        hnd_DDiFileToWriteTo.RemoveFields();
        str_FilePathSchema = Translate("C:\\DataCapture\\upload\\schema.ini");
        bln_Schema = FileDirectoryLib::CheckIfFileExists(str_FilePathSchema);
        if (bln_Schema == 1)
        {
          FileDirectoryLib::DeleteFile(str_FilePathSchema);
          MECC::TraceComment(Translate("Schema.ini deleted"));
        }
        else
        {
          MECC::TraceComment(Translate("Schema.ini not found"));
        }
        RemoveTextDelimitersFromAsciiTextFile(str_DDIFileName);
      }
    }
    MECC::TraceComment(Translate("DDi Trigger Start"));
    {
      event localDummyEvent1;
      if( 0 == Shell("C:\\DataCapture\\DataCaptureStart.bat", hslShow, hslSynchronous, localDummyEvent1, blnPuma) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    MECC::TraceComment(Translate("DDi Trigger Complete"));
    MECC::TraceComment(Translate("##################################################\n             DDi SAMPLE TRANSFER FILE TRIGGER: END\n##################################################"));
  }

  function DDI_Octet( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_int_WellNum ) void {
    private variable int_BarcodeArraySize;
    private variable str_sqlQueryOctet;
    private variable str_DDIFolder;
    private variable flt_BindingRate;
    private variable str_Well_ID;
    private variable flt_Titer;
    private variable LC_BarcodeArraySize;
    private variable str_DDIFileName;
    private variable str_Time;
    private variable str_Date;
    private variable LC_DBRead;
    private variable str_Barcode;
    private variable str_TimeForDDiFile;
    private variable str_DateTimeForDDiFile;
    private variable str_DateForDDiFile;
    private file hnd_DDiFileToWriteTo;
    private file hnd_ReadDatabaseFile;
    private variable bln_Schema;
    private variable str_FilePathSchema;
    private variable blnPuma;
    MECC::TraceComment(Translate("########################################\n             DDi OCTET  FILE TRIGGER: START\n########################################"));
    str_DDIFolder = Translate("C:\\DataCapture\\upload\\");
    str_Date = TimGetFormattedDate(Translate("_%Y-%m-%d "));
    str_Time = TimGetFormattedTime(Translate("%H-%M-%S"));
    str_DDIFileName = StrConcat8(str_DDIFolder, Translate("OCTET_"), i_str_ExperimentID, str_Date, str_Time, Translate(".csv"), Translate(""), Translate(""));
    TrcTrace(Translate("DDI File - "), str_DDIFileName);
    str_DateForDDiFile = TimGetFormattedDate(Translate("%Y-%m-%d"));
    str_TimeForDDiFile = TimGetFormattedTime(Translate("%H:%M:%S"));
    str_DateTimeForDDiFile = StrConcat4(str_DateForDDiFile, Translate(" "), str_TimeForDDiFile, Translate(""));
    int_BarcodeArraySize=i_arr_Barcodes.GetSize();
    TrcTrace(Translate("int_BarcodeArraySize = "), int_BarcodeArraySize);
    hnd_DDiFileToWriteTo.SetExtendedProperties( "HDR=NO");
    hnd_DDiFileToWriteTo.AddField("Container Barcode", str_Barcode, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Container Position", str_Well_ID, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Titer", flt_Titer, hslFloat);
    hnd_DDiFileToWriteTo.AddField("Binding Rate", flt_BindingRate, hslFloat);
    hnd_DDiFileToWriteTo.AddField("Time", str_DateTimeForDDiFile, hslString, 255);
    hnd_DDiFileToWriteTo.SetDelimiter(hslCSVDelimited);
    if( 0 == hnd_DDiFileToWriteTo.Open(str_DDIFileName, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_DDIFileName, "HxMetEdCompCmd");
    }
    {
      for(LC_BarcodeArraySize = 0; LC_BarcodeArraySize < int_BarcodeArraySize;)
      {
        LC_BarcodeArraySize = LC_BarcodeArraySize + 1;
        str_Barcode=i_arr_Barcodes.GetAt(LC_BarcodeArraySize-1);
        str_sqlQueryOctet = StrConcat12(Translate("SELECT TOP ("), i_int_WellNum, Translate(") PivotTable.[ExperimentID],PivotTable.[SampleID],PivotTable.[DateTime],PivotTable.[SampleBarcode],PivotTable.[SampleWell],PivotTable.[SampleVesselType],PivotTable.[AssayType],PivotTable.[Titer] as Result_Titer, PivotTable.[Binding Rate] as Result_BR "), Translate("FROM (SELECT [ExperimentID],[SampleID],[DateTime],[SampleBarcode],[SampleWell],[SampleVesselType],[AssayType], ResultType, Result "), Translate("FROM [MEDIMMUNESAMPLETRACKINGDB_2014_Data].[dbo].[AnalyticResultTable]) AS T  "), Translate("PIVOT  (MAX(Result) FOR ResultType IN ([Titer], [Binding Rate])) AS PivotTable "), Translate("WHERE ExperimentID = '"), i_str_ExperimentID, Translate("' AND SampleBarcode ='"), str_Barcode, Translate("' AND AssayType = 'Octet_ProteinA' ORDER BY DateTime DESC"), Translate(""));
        TrcTrace(Translate("sql Query - "), str_sqlQueryOctet);
        hnd_ReadDatabaseFile.AddField("Result_Titer", flt_Titer, hslFloat);
        hnd_ReadDatabaseFile.AddField("Result_BR", flt_BindingRate, hslFloat);
        hnd_ReadDatabaseFile.AddField("SampleWell", str_Well_ID, hslString, 255);
        hnd_ReadDatabaseFile.SetDelimiter(hslCSVDelimited);
        if( 0 == hnd_ReadDatabaseFile.Open(SampleTrackingDB_glDBName, hslRead, str_sqlQueryOctet, SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
        {
          LC_DBRead = 0;
          while (
             (hnd_ReadDatabaseFile.Eof() == 0)
          )
          {
            LC_DBRead = LC_DBRead + 1;
            if( 0 == hnd_ReadDatabaseFile.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == hnd_DDiFileToWriteTo.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != hnd_ReadDatabaseFile.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        hnd_ReadDatabaseFile.RemoveFields();
      }
    }
    if( 0 != hnd_DDiFileToWriteTo.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hnd_DDiFileToWriteTo.RemoveFields();
    str_FilePathSchema = Translate("C:\\DataCapture\\upload\\schema.ini");
    bln_Schema = FileDirectoryLib::CheckIfFileExists(str_FilePathSchema);
    if (bln_Schema == 1)
    {
      FileDirectoryLib::DeleteFile(str_FilePathSchema);
      MECC::TraceComment(Translate("Schema.ini deleted"));
    }
    else
    {
      MECC::TraceComment(Translate("Schema.ini not found"));
    }
    RemoveTextDelimitersFromAsciiTextFile(str_DDIFileName);
    MECC::TraceComment(Translate("DDi Trigger Start"));
    {
      event localDummyEvent1;
      if( 0 == Shell("C:\\DataCapture\\DataCaptureStart.bat", hslShow, hslSynchronous, localDummyEvent1, blnPuma) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    MECC::TraceComment(Translate("DDi Trigger Complete"));
    MECC::TraceComment(Translate("########################################\n             DDi OCTET  FILE TRIGGER: START\n########################################"));
  }

  function DDI_CriticalReagents_Method4( variable & i_arr_Barcodes[], variable i_str_ExperimentID, variable i_str_ReagentName, variable i_str_ReagentLot, variable i_int_WellNum, variable i_str_ProcessStep ) void {
    private variable int_BarcodeArraySize;
    private variable bln_Schema;
    private variable str_DDIFolder;
    private variable str_TimeForDDiFile;
    private variable str_Well_ID;
    private variable LC_BarcodeArraySize;
    private variable str_DDIFileName;
    private variable str_Time;
    private variable str_FilePathSchema;
    private variable str_Date;
    private variable blnPuma;
    private variable str_sqlQuery;
    private variable LC_DBRead;
    private variable str_DateTimeForDDiFile;
    private variable flt_ReagentVol;
    private variable str_DateForDDiFile;
    private variable str_Barcode;
    private file hnd_DDiFileToWriteTo;
    private file hnd_ReadDatabaseFile;
    MECC::TraceComment(Translate("###########################################################\n             DDi CRITICAL REAGENTS METHOD 4 FILE TRIGGER: START\n###########################################################"));
    str_DDIFolder = Translate("C:\\DataCapture\\upload\\");
    str_Date = TimGetFormattedDate(Translate("_%Y-%m-%d "));
    str_Time = TimGetFormattedTime(Translate("%H-%M-%S"));
    str_DDIFileName = StrConcat8(str_DDIFolder, Translate("RT_"), i_str_ExperimentID, str_Date, str_Time, Translate(".csv"), Translate(""), Translate(""));
    TrcTrace(Translate("str_DDIFileName = "), str_DDIFileName);
    str_DateForDDiFile = TimGetFormattedDate(Translate("%Y-%m-%d"));
    str_TimeForDDiFile = TimGetFormattedTime(Translate("%H:%M:%S"));
    str_DateTimeForDDiFile = StrConcat4(str_DateForDDiFile, Translate(" "), str_TimeForDDiFile, Translate(""));
    int_BarcodeArraySize=i_arr_Barcodes.GetSize();
    TrcTrace(Translate("int_BarcodeArraySize = "), int_BarcodeArraySize);
    hnd_DDiFileToWriteTo.SetExtendedProperties( "HDR=NO");
    hnd_DDiFileToWriteTo.AddField("Destination Container", str_Barcode, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Destination Position", str_Well_ID, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Reagent Name", i_str_ReagentName, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Reagent Batch", i_str_ReagentLot, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Reagent Volume", flt_ReagentVol, hslFloat);
    hnd_DDiFileToWriteTo.AddField("Time", str_DateTimeForDDiFile, hslString, 255);
    hnd_DDiFileToWriteTo.SetDelimiter(hslCSVDelimited);
    if( 0 == hnd_DDiFileToWriteTo.Open(str_DDIFileName, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_DDIFileName, "HxMetEdCompCmd");
    }
    {
      for(LC_BarcodeArraySize = 0; LC_BarcodeArraySize < int_BarcodeArraySize;)
      {
        LC_BarcodeArraySize = LC_BarcodeArraySize + 1;
        str_Barcode=i_arr_Barcodes.GetAt(LC_BarcodeArraySize-1);
        str_sqlQuery = StrConcat12(Translate("SELECT TOP ("), i_int_WellNum, Translate(") [ExperimentID],[DateTime],[SourceBarcode],[SourceWell],[SourceVesselType],[DestinationBarcode],[DestinationWell],[DestinationVesselType],[TotalVol],[SampleTransferVol],[Reagent1Vol],[Reagent1ID],[Reagent1Lot],[Reagent2Vol],[Reagent2ID],[Reagent2Lot],[ProcessStep] FROM [MEDIMMUNESAMPLETRACKINGDB_2014_Data].[dbo].[SampleTrackingTable] where ExperimentID='"), i_str_ExperimentID, Translate("' AND DestinationBarcode='"), str_Barcode, Translate("' AND Reagent1ID='"), i_str_ReagentName, Translate("' AND Reagent1Lot ='"), i_str_ReagentLot, Translate("' AND ProcessStep ='"), i_str_ProcessStep);
        str_sqlQuery = StrConcat4(str_sqlQuery, Translate("' order by DateTime DESC"), Translate(""), Translate(""));
        TrcTrace(Translate("sql Query - "), str_sqlQuery);
        hnd_ReadDatabaseFile.AddField("Reagent1Vol", flt_ReagentVol, hslFloat);
        hnd_ReadDatabaseFile.AddField("DestinationWell", str_Well_ID, hslString, 255);
        hnd_ReadDatabaseFile.SetDelimiter(hslCSVDelimited);
        if( 0 == hnd_ReadDatabaseFile.Open(SampleTrackingDB_glDBName, hslRead, str_sqlQuery, SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
        {
          LC_DBRead = 0;
          while (
             (hnd_ReadDatabaseFile.Eof() == 0)
          )
          {
            LC_DBRead = LC_DBRead + 1;
            if( 0 == hnd_ReadDatabaseFile.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == hnd_DDiFileToWriteTo.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != hnd_ReadDatabaseFile.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        hnd_ReadDatabaseFile.RemoveFields();
      }
    }
    if( 0 != hnd_DDiFileToWriteTo.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hnd_DDiFileToWriteTo.RemoveFields();
    hnd_DDiFileToWriteTo.SetExtendedProperties( "HDR=NO");
    hnd_DDiFileToWriteTo.AddField("Destination Container", str_Barcode, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Destination Position", str_Well_ID, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Reagent Name", i_str_ReagentName, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Reagent Batch", i_str_ReagentLot, hslString, 255);
    hnd_DDiFileToWriteTo.AddField("Reagent Volume", flt_ReagentVol, hslFloat);
    hnd_DDiFileToWriteTo.AddField("Time", str_DateTimeForDDiFile, hslString, 255);
    hnd_DDiFileToWriteTo.SetDelimiter(hslCSVDelimited);
    if( 0 == hnd_DDiFileToWriteTo.Open(str_DDIFileName, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_DDIFileName, "HxMetEdCompCmd");
    }
    {
      for(LC_BarcodeArraySize = 0; LC_BarcodeArraySize < int_BarcodeArraySize;)
      {
        LC_BarcodeArraySize = LC_BarcodeArraySize + 1;
        str_Barcode=i_arr_Barcodes.GetAt(LC_BarcodeArraySize-1);
        str_sqlQuery = StrConcat12(Translate("SELECT TOP ("), i_int_WellNum, Translate(") [ExperimentID],[DateTime],[SourceBarcode],[SourceWell],[SourceVesselType],[DestinationBarcode],[DestinationWell],[DestinationVesselType],[TotalVol],[SampleTransferVol],[Reagent1Vol],[Reagent1ID],[Reagent1Lot],[Reagent2Vol],[Reagent2ID],[Reagent2Lot],[ProcessStep] FROM [MEDIMMUNESAMPLETRACKINGDB_2014_Data].[dbo].[SampleTrackingTable] where ExperimentID='"), i_str_ExperimentID, Translate("' AND DestinationBarcode='"), str_Barcode, Translate("' AND Reagent2ID='"), i_str_ReagentName, Translate("' AND Reagent2Lot ='"), i_str_ReagentLot, Translate("' AND ProcessStep ='"), i_str_ProcessStep);
        str_sqlQuery = StrConcat4(str_sqlQuery, Translate("' order by DateTime DESC"), Translate(""), Translate(""));
        TrcTrace(Translate("sql Query - "), str_sqlQuery);
        hnd_ReadDatabaseFile.AddField("Reagent1Vol", flt_ReagentVol, hslFloat);
        hnd_ReadDatabaseFile.AddField("DestinationWell", str_Well_ID, hslString, 255);
        hnd_ReadDatabaseFile.SetDelimiter(hslCSVDelimited);
        if( 0 == hnd_ReadDatabaseFile.Open(SampleTrackingDB_glDBName, hslRead, str_sqlQuery, SampleTrackingDB_glConnectionString) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
        }
        {
          LC_DBRead = 0;
          while (
             (hnd_ReadDatabaseFile.Eof() == 0)
          )
          {
            LC_DBRead = LC_DBRead + 1;
            if( 0 == hnd_ReadDatabaseFile.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == hnd_DDiFileToWriteTo.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != hnd_ReadDatabaseFile.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        hnd_ReadDatabaseFile.RemoveFields();
      }
    }
    if( 0 != hnd_DDiFileToWriteTo.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hnd_DDiFileToWriteTo.RemoveFields();
    str_FilePathSchema = Translate("C:\\DataCapture\\upload\\schema.ini");
    bln_Schema = FileDirectoryLib::CheckIfFileExists(str_FilePathSchema);
    if (bln_Schema == 1)
    {
      FileDirectoryLib::DeleteFile(str_FilePathSchema);
      MECC::TraceComment(Translate("Schema.ini deleted"));
    }
    else
    {
      MECC::TraceComment(Translate("Schema.ini not found"));
    }
    RemoveTextDelimitersFromAsciiTextFile(str_DDIFileName);
    MECC::TraceComment(Translate("DDi Trigger Start"));
    {
      event localDummyEvent1;
      if( 0 == Shell("C:\\DataCapture\\DataCaptureStart.bat", hslShow, hslSynchronous, localDummyEvent1, blnPuma) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    MECC::TraceComment(Translate("DDi Trigger Complete"));
    MECC::TraceComment(Translate("###########################################################\n             DDi CRITICAL REAGENTS METHOD 4 FILE TRIGGER: END\n###########################################################"));
  }
} // library namespace
