#pragma once
#include "HSL Liconic STX\\HSL Liconic STX.hsl"
#include "Training\\HSLTrcLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLFilLib.hsl"
#include "HSLMappingReport.hsl"
#include "HSLMETEDLib.hs_"
#include "Training\\HSLMECCLib.hs_"

namespace STXCAROUSELMANAGER {
  private function CheckLiconicStatus(  ) void ;
  function ClearDBData(  ) void ;
  private function Definitions( variable & oDBFileName, variable & oDBTableName, variable & oUnitID, variable & oSTXTitle, variable & oSimulationState ) void ;
  function GetBarcodedPlate( variable iBarcode, variable iRemovePlateFromExperiment ) void ;
  function GetNewPlateFromPartition( variable iPartition, variable iRemovePlateFromExperiment ) variable ;
  private function GetNonBarcodedPlate( variable iCassette, variable iShelf ) void ;
  function GetPlateNoBarcode( variable iCassette, variable iShelf, variable iRemoveFromExperiment, variable & oBarcode ) void ;
  function InitializeCarousel(  ) void ;
  function InventoryCarousel(  ) void ;
  function InventoryCarousel_Partial( variable Partition ) variable ;
  private function InventoryCarousel_PartialTrueName( variable Partition ) variable ;
  function InventoryCarousel_PartialVariableDelay( variable Partition, variable PartitionTime ) variable ;
  function StoreNewPlate( variable iBarcode, variable & oCasette, variable & oShelf ) variable ;
  function StoreNewPlateInPartition( variable iBarcode, variable iPartition ) void ;
  function StorePlate( variable iBarcode, variable & oCassette, variable & oShelf ) void ;
  function StorePlateAsInProcess( variable iBarcode, variable & oCassette, variable & oShelf ) void ;
  function StorePlateAsUsed( variable iBarcode, variable & oCassette, variable & oShelf ) void ;
  function TerminateCarousel(  ) void ;
  function UpdateDatabaseFromArrays( variable iStackNumber, variable iPositionInStack, variable iBarcode, variable iPlateOccupancy ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function GetBarcodedPlate( variable iBarcode, variable iRemovePlateFromExperiment ) void {
    private variable myPlateStatus;
    private variable myCassette;
    private variable myBarcode;
    private variable mySQLCommand;
    private file LOOKUP_PLATE_POSITION_FILE;
    private variable myFiileName;
    private variable myIncubatorID;
    private variable myTableName;
    private variable myShelf;
    private file REMOVE_BARCODE_FILE;
    private variable level;
    private variable slot;
    private file UPDATE_STATUS_FILE;
    private variable mySTXTitle;
    private variable mySimState;
    private variable tmpShelf;
    private variable tmpCass;
    private variable countError;
    private variable dlgReturn;
    private variable tmpBarcode;
    private variable stepReturn;
    private variable RetryReturn;
    private variable loopIncubatorProblem;
    private dialog dialogHandle_1;
    private dialog dialogHandle_2;
    private dialog dialogHandle_3;
    private dialog dialogHandle_4;
    private dialog dialogHandle_5;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************GetPlate Sub**************************************"));
    Definitions(myFiileName, myTableName, myIncubatorID, mySTXTitle, mySimState);
    if (mySimState != 1)
    {
      mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myTableName, Translate("] WHERE [Barcode] = '"), iBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
      {
        countError = 0;
        while (1 == 1)
        {
          countError = countError + 1;
          LOOKUP_PLATE_POSITION_FILE.AddField("Cassette", myCassette, hslString, 255);
          LOOKUP_PLATE_POSITION_FILE.AddField("Shelf", myShelf, hslString, 255);
          LOOKUP_PLATE_POSITION_FILE.AddField("Barcode", myBarcode, hslString, 255);
          LOOKUP_PLATE_POSITION_FILE.AddField("Status", myPlateStatus, hslString, 255);
          if( 0 == LOOKUP_PLATE_POSITION_FILE.Open(myFiileName + " " + myTableName, hslRead, mySQLCommand) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFiileName, "HxMetEdCompCmd");
          }
          onerror goto errLabel_6 ;
          err.Clear();
          if( 0 == LOOKUP_PLATE_POSITION_FILE.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          break;
          errLabel_6 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            if( 0 != LOOKUP_PLATE_POSITION_FILE.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            LOOKUP_PLATE_POSITION_FILE.RemoveFields();
            dialogHandle_4.SetOutput(Translate("The plate with barcode '"), iBarcode, Translate("' could not be found in incubator inventory!\nPlease place it onto the loading position and press OK afterwards."));
            dlgReturn = dialogHandle_4.ShowOutput(Translate("Barcode not found in Incubator Inventory"), hslOKCancel | hslError | hslDefButton1, hslInfinite);
            if (dlgReturn == 2)
            {
              abort;
            }
            StoreNewPlate(iBarcode, tmpCass, tmpShelf);
          }   /* end if from skip handler if no error */
        }
      }
      slot = StrIVal(myCassette);
      level = StrIVal(myShelf);
      CheckLiconicStatus();
      TrcTrace4(mySTXTitle, Translate("Get Plate "), iBarcode, Translate(" started"));
      if (mySimState != 1)
      {
        stepReturn = HSLLiconicSTX::COMMAND::ServiceReadBarcode(myIncubatorID, slot, level, tmpBarcode);
        if(0){
          {
            loopIncubatorProblem = 0;
            while (stepReturn == HSLLiconicSTX::FALSE)
            {
              loopIncubatorProblem = loopIncubatorProblem + 1;
              if (loopIncubatorProblem > 1)
              {
                HSLLiconicSTX::Terminate(myIncubatorID);
                dialogHandle_1.SetOutput(Translate("Check the incubator. \n\n  * * * * There has been "), loopIncubatorProblem, Translate(" failures!   * * * * \n\nOpen the door and check the plate to make sure it is in the correct location. \n Once you click 'Retry' it will Initialize and repeat this dialog forever. "));
                RetryReturn = dialogHandle_1.ShowOutput(Translate("STX 220 - Incubator Reading Problem"), hslRetryCancel | hslInformation | hslDefButton1, 30);
                InitializeCarousel();
              }
              else
              {
                dialogHandle_3.SetOutput(Translate("The incubator returned an error reading the Barcode!\n\nPlease check logfile for details."));
                RetryReturn = dialogHandle_3.ShowOutput(Translate("Incubator Error"), hslRetryCancel | hslInformation | hslDefButton1, 30);
              }
              if (RetryReturn == 2)
              {
                abort;
              }
              stepReturn = HSLLiconicSTX::COMMAND::ServiceReadBarcode(myIncubatorID, slot, level, tmpBarcode);
            }
          }
        }
        TrcTrace("Barcode of plate read is ", tmpBarcode);
        stepReturn = HSLLiconicSTX::COMMAND::ServiceMovePlate(myIncubatorID, 2, slot, level, 1, 0, myIncubatorID, 1, 0, 0, 2, 0);
        if (stepReturn == HSLLiconicSTX::FALSE)
        {
          dialogHandle_2.SetOutput(Translate("The incubator returned an error!\nPlease check logfile for details."));
          dialogHandle_2.ShowOutput(Translate("Incubator Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }
        if(0){
          if (tmpBarcode != iBarcode)
          {
            dialogHandle_5.SetOutput(Translate("The plate with barcode '"), iBarcode, Translate("' could not be found in incubator, possibly another one was found and has been unloaded!\nPlease place the right one onto the loading position and press OK afterwards."));
            dlgReturn = dialogHandle_5.ShowOutput(Translate("Plate not found in Incubator"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          }
        }
      }
      CheckLiconicStatus();
      TrcTrace4(mySTXTitle, Translate("Get Plate "), iBarcode, Translate(" finished"));
      if (iRemovePlateFromExperiment == 1)
      {
        mySQLCommand = StrConcat8(Translate("UPDATE ["), myTableName, Translate("] SET [Barcode] = NULL , [PlatePresent] = 0, [Status] = NULL WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""));
        if( 0 == REMOVE_BARCODE_FILE.Open(myFiileName + " " + myTableName, hslAppend, mySQLCommand) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFiileName, "HxMetEdCompCmd");
        }
        if( 0 != REMOVE_BARCODE_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        REMOVE_BARCODE_FILE.RemoveFields();
        TrcTrace4(mySTXTitle, Translate("Plate "), iBarcode, Translate(" removed from inventory database"));
      }
      else
      {
        mySQLCommand = StrConcat8(Translate("UPDATE ["), myTableName, Translate("] SET [PlatePresent] = 0, [Status] = 'STAR_DECK' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""));
        if( 0 == UPDATE_STATUS_FILE.Open(myFiileName + " " + myTableName, hslAppend, mySQLCommand) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFiileName, "HxMetEdCompCmd");
        }
        if( 0 != UPDATE_STATUS_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        UPDATE_STATUS_FILE.RemoveFields();
        TrcTrace4(mySTXTitle, Translate("Plate "), iBarcode, Translate(" status updated to \"STAR_DECK\""));
      }
    }
    else
    {
    }
  }

  private function Definitions( variable & oDBFileName, variable & oDBTableName, variable & oUnitID, variable & oSTXTitle, variable & oSimulationState ) void {
    oDBFileName = 0;
    oDBTableName = 0;
    oUnitID = 0;
    oSTXTitle = 0;
    oSimulationState = 0;
    oDBFileName = Translate("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\MedImmune_STXManagment.mdb");
    oDBTableName = Translate("STXCarouselTable");
    oUnitID = HSLLiconicSTX::UNIT_1;
    oSTXTitle = Translate("STXCAROUSEL::");
    oSimulationState = Util::GetSimulationMode();
    TrcTrace("oDBFileName = ", oDBFileName);
    TrcTrace("oDBTableName = ", oDBTableName);
    TrcTrace("oUnitID = ", oUnitID);
    TrcTrace("oSTXTitle = ", oSTXTitle);
    TrcTrace("oSimulationState = ", oSimulationState);
  }

  function InventoryCarousel(  ) void {
    private variable myDBFileName;
    private variable myUnitID;
    private variable myDBTableName;
    private variable myInventoryFileName;
    private file LICONIC_INV_FILE;
    private variable myCassette;
    private variable myBarcode;
    private variable myShelf;
    private variable shelf;
    private variable cassette;
    private file UPDATE_DB_INVENTORY_FILE;
    private variable mySQLCommand;
    private file READ_DB_INVENTORY_FILE;
    private variable myStatus;
    private variable myZeroBasedIndex;
    private variable retValue;
    private variable shelfInventoryArray[];
    private variable barcodeToRemoveArray[];
    private variable cassetteInventoryArray[];
    private variable barcodeInventoryArray[];
    private variable arrayIndex;
    private variable myArraySize;
    private variable mySTXTitle;
    private timer timer1;
    private variable mySimState;
    private variable nullBarcode;
    private variable myPPSensor;
    private variable ppSensorArray[];
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************InventoryIncubator Sub**************************************"));
    Definitions(myDBFileName, myDBTableName, myUnitID, mySTXTitle, mySimState);
    myInventoryFileName = Translate("C:\\Liconic Inventory Files\\STXCarousel_INV.txt");
    HSLMapReport::DeleteFile(myInventoryFileName);
    CheckLiconicStatus();
    TrcTrace(mySTXTitle, Translate("Inventory started"));
    if (mySimState != 1)
    {
      HSLLiconicSTX::COMMAND::Inventory(myUnitID, myInventoryFileName, 1, 1);
      if( 0 == timer1.SetTimer(1200) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      CheckLiconicStatus();
      TrcTrace(mySTXTitle, Translate("Inventory complete"));
      TrcTrace(mySTXTitle, Translate("Start update of inventory database"));
      cassetteInventoryArray.SetSize(0);
      shelfInventoryArray.SetSize(0);
      ppSensorArray.SetSize(0);
      barcodeInventoryArray.SetSize(0);
      LICONIC_INV_FILE.AddField(1, myBarcode, hslString, 255);
      LICONIC_INV_FILE.AddField(4, myPPSensor, hslInteger);
      LICONIC_INV_FILE.AddField(8, myCassette, hslString, 255);
      LICONIC_INV_FILE.AddField(9, myShelf, hslString, 255);
      LICONIC_INV_FILE.SetDelimiter(hslCSVDelimited);
      if( 0 == LICONIC_INV_FILE.Open(myInventoryFileName, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myInventoryFileName, "HxMetEdCompCmd");
      }
      {
        while (
           (LICONIC_INV_FILE.Eof() == 0)
        )
        {
          if( 0 == LICONIC_INV_FILE.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          barcodeInventoryArray.AddAsLast(myBarcode);
          ppSensorArray.AddAsLast(myPPSensor);
          cassetteInventoryArray.AddAsLast(myCassette);
          shelfInventoryArray.AddAsLast(myShelf);
          if (myPPSensor == 1)
          {
            onerror goto errLabel_7 ;
            err.Clear();
            if (myBarcode != "<null>")
            {
              nullBarcode = 0;
            }
            else
            {
              nullBarcode = 1;
            }
            errLabel_7 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              nullBarcode = 1;
            }   /* end if from skip handler if no error */
            if (nullBarcode == 0)
            {
              mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
              READ_DB_INVENTORY_FILE.AddField("Cassette", cassette, hslString, 255);
              READ_DB_INVENTORY_FILE.AddField("Shelf", shelf, hslString, 255);
              if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
              }
              onerror goto errLabel_8 ;
              err.Clear();
              if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 != READ_DB_INVENTORY_FILE.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              READ_DB_INVENTORY_FILE.RemoveFields();
              errLabel_8 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                if( 0 != READ_DB_INVENTORY_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                READ_DB_INVENTORY_FILE.RemoveFields();
                mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = '"), myBarcode, Translate("', [PlatePresent] = "), myPPSensor, Translate(", [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""));
                if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                }
                if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                UPDATE_DB_INVENTORY_FILE.RemoveFields();
              }   /* end if from skip handler if no error */
            }
            else
            {
              mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL, [PlatePresent] = "), myPPSensor, Translate(", [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
              if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
              }
              if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              UPDATE_DB_INVENTORY_FILE.RemoveFields();
            }
          }
          else
          {
            mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL, [PlatePresent] = "), myPPSensor, Translate(", [Status] = NULL WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
            if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
            }
            if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            UPDATE_DB_INVENTORY_FILE.RemoveFields();
          }
        }
      }
      if( 0 != LICONIC_INV_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      LICONIC_INV_FILE.RemoveFields();
      mySQLCommand = StrConcat4(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE BARCODE IS NOT NULL"), Translate(""));
      READ_DB_INVENTORY_FILE.AddField("Cassette", myCassette, hslString, 255);
      READ_DB_INVENTORY_FILE.AddField("Shelf", myShelf, hslString, 255);
      READ_DB_INVENTORY_FILE.AddField("Barcode", myBarcode, hslString, 255);
      READ_DB_INVENTORY_FILE.AddField("Status", myStatus, hslString, 255);
      if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
      }
      barcodeToRemoveArray.SetSize(0);
      {
        while (
           (READ_DB_INVENTORY_FILE.Eof() == 0)
        )
        {
          if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          retValue = Util::Lookup(barcodeInventoryArray, myBarcode, myZeroBasedIndex);
          if (retValue == 0)
          {
            if (myStatus != "STAR_DECK")
            {
              barcodeToRemoveArray.AddAsLast(myBarcode);
            }
          }
        }
      }
      if( 0 != READ_DB_INVENTORY_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      READ_DB_INVENTORY_FILE.RemoveFields();
      myArraySize=barcodeToRemoveArray.GetSize();
      {
        for(arrayIndex = 0; arrayIndex < myArraySize;)
        {
          arrayIndex = arrayIndex + 1;
          myBarcode=barcodeToRemoveArray.GetAt(arrayIndex-1);
          mySQLCommand = StrConcat8(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL , [Status] = NULL, [PlatePresent] = 0 WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
          if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
          }
          if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          UPDATE_DB_INVENTORY_FILE.RemoveFields();
        }
      }
    }
    TrcTrace(mySTXTitle, Translate("Inventory of incubator complete."));
  }

  function StorePlate( variable iBarcode, variable & oCassette, variable & oShelf ) void {
    private variable myPlateStatus;
    private variable myBarcode;
    private variable mySQLCommand;
    private variable myFiileName;
    private variable myIncubatorID;
    private variable myTableName;
    private file LOOKUP_PLATE_POSITION_FILE;
    private variable level;
    private variable slot;
    private file UPDATE_STATUS_FILE;
    private variable mySTXTitle;
    private variable mySimState;
    private variable stepReturn;
    private dialog dialogHandle_9;
    private dialog dialogHandle_10;
    oCassette = 0;
    oShelf = 0;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************StorePlate Sub**************************************"));
    Definitions(myFiileName, myTableName, myIncubatorID, mySTXTitle, mySimState);
    if (mySimState != 1)
    {
      mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myTableName, Translate("] WHERE [Barcode] = '"), iBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
      LOOKUP_PLATE_POSITION_FILE.AddField("Cassette", oCassette, hslString, 255);
      LOOKUP_PLATE_POSITION_FILE.AddField("Shelf", oShelf, hslString, 255);
      LOOKUP_PLATE_POSITION_FILE.AddField("Barcode", myBarcode, hslString, 255);
      LOOKUP_PLATE_POSITION_FILE.AddField("Status", myPlateStatus, hslString, 255);
      if( 0 == LOOKUP_PLATE_POSITION_FILE.Open(myFiileName + " " + myTableName, hslRead, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFiileName, "HxMetEdCompCmd");
      }
      onerror goto errLabel_11 ;
      err.Clear();
      if( 0 == LOOKUP_PLATE_POSITION_FILE.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != LOOKUP_PLATE_POSITION_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      LOOKUP_PLATE_POSITION_FILE.RemoveFields();
      errLabel_11 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        if( 0 != LOOKUP_PLATE_POSITION_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        LOOKUP_PLATE_POSITION_FILE.RemoveFields();
        dialogHandle_10.SetOutput(Translate("The plate with barcode '"), iBarcode, Translate("' could not be found in incubator inventory!\nYou cannot store back an unknown plate."));
        dialogHandle_10.ShowOutput(Translate("Barcode not found in Incubator Inventory"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
      slot = StrIVal(oCassette);
      level = StrIVal(oShelf);
      CheckLiconicStatus();
      TrcTrace8(mySTXTitle, Translate("Replacing Plate "), iBarcode, Translate(" in Cassette "), slot, Translate(", Shelf "), level, Translate(" started"));
      if (mySimState != 1)
      {
        stepReturn = HSLLiconicSTX::COMMAND::ServiceMovePlate(myIncubatorID, 1, 0, 0, 2, 0, myIncubatorID, 2, slot, level, 1, 0);
        if (stepReturn == HSLLiconicSTX::FALSE)
        {
          dialogHandle_9.SetOutput(Translate("The incubator returned an error!\nPlease check logfile for details."));
          dialogHandle_9.ShowOutput(Translate("Incubator Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }
      }
      CheckLiconicStatus();
      TrcTrace4(mySTXTitle, Translate("Replace Plate "), iBarcode, Translate(" complete"));
      mySQLCommand = StrConcat8(Translate("UPDATE ["), myTableName, Translate("] SET [PlatePresent] = 1, [Status] = 'INCUBATOR' WHERE [Cassette] = '"), oCassette, Translate("' AND [Shelf] = '"), oShelf, Translate("'"), Translate(""));
      if( 0 == UPDATE_STATUS_FILE.Open(myFiileName + " " + myTableName, hslAppend, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFiileName, "HxMetEdCompCmd");
      }
      if( 0 != UPDATE_STATUS_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      UPDATE_STATUS_FILE.RemoveFields();
    }
    else
    {
      oCassette = 1;
      oShelf = 1;
    }
  }

  function InitializeCarousel(  ) void {
    private variable myUnitID;
    private variable myTableName;
    private variable myFileName;
    private variable mySTXTitle;
    private variable User_choice;
    private variable loopCounter3;
    private variable loopCounter4;
    private timer timer1;
    private variable STX_STATUS;
    private variable mySimState;
    private variable STX_returnSTATUS;
    private dialog dialogHandle_12;
    private variable new_WarningStatus;
    private variable new_GateClosedStatus;
    private variable new_ErrorCodeStatus;
    private variable new_PlateReady;
    private variable new_SysInitialized;
    private variable new_SysReady;
    private variable new_UserDoorStatus;
    private variable new_XferStatStatus;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************InitializeIncubator Sub**************************************"));
    Definitions(myFileName, myTableName, myUnitID, mySTXTitle, mySimState);
    TrcTrace(mySTXTitle, Translate("Initialize start"));
    if (mySimState == 0)
    {
      STX_returnSTATUS = HSLLiconicSTX::Initialize(myUnitID, "localhost", 3336, HSLLiconicSTX::TRACE_LEVEL_FULL, HSLLiconicSTX::FALSE);
    }
    else
    {
      STX_returnSTATUS = HSLLiconicSTX::Initialize(myUnitID, "localhost", 3336, HSLLiconicSTX::TRACE_LEVEL_FULL, HSLLiconicSTX::TRUE);
    }
    HSLLiconicSTX::COMMAND::GetSysStatus(myUnitID, STX_STATUS, new_SysReady, new_PlateReady, new_SysInitialized, new_XferStatStatus, new_GateClosedStatus, new_UserDoorStatus, new_WarningStatus, new_ErrorCodeStatus);
    TrcTrace(Translate("Initialize: New SysReady - "), new_SysReady);
    {
      loopCounter4 = 0;
      while (new_SysReady != HSLLiconicSTX::TRUE)
      {
        loopCounter4 = loopCounter4 + 1;
        if (mySimState == 0)
        {
          STX_returnSTATUS = HSLLiconicSTX::Initialize(myUnitID, "localhost", 3336, HSLLiconicSTX::TRACE_LEVEL_FULL, HSLLiconicSTX::FALSE);
        }
        else
        {
          STX_returnSTATUS = HSLLiconicSTX::Initialize(myUnitID, "localhost", 3336, HSLLiconicSTX::TRACE_LEVEL_FULL, HSLLiconicSTX::TRUE);
        }
        TrcTrace(Translate("Initialize after 1st Init: STX_returnSTATUS = "), STX_returnSTATUS);
        if (STX_returnSTATUS == HSLLiconicSTX::FALSE)
        {
          HSLLiconicSTX::COMMAND::GetSysStatus(myUnitID, STX_STATUS, new_SysReady, new_PlateReady, new_SysInitialized, new_XferStatStatus, new_GateClosedStatus, new_UserDoorStatus, new_WarningStatus, new_ErrorCodeStatus);
          TrcTrace4(mySTXTitle, Translate("StatusCode:  "), STX_STATUS, Translate(""));
          if (new_SysReady == HSLLiconicSTX::TRUE)
          {
            break;
          }
          else
          {
            if (mySimState == 1)
            {
              break;
            }
            {
              loopCounter3 = 0;
              while (new_SysReady != HSLLiconicSTX::TRUE)
              {
                loopCounter3 = loopCounter3 + 1;
                HSLLiconicSTX::COMMAND::GetSysStatus(myUnitID, STX_STATUS, new_SysReady, new_PlateReady, new_SysInitialized, new_XferStatStatus, new_GateClosedStatus, new_UserDoorStatus, new_WarningStatus, new_ErrorCodeStatus);
                TrcTrace4(mySTXTitle, Translate("StatusCode:  "), STX_STATUS, Translate(""));
                if( 0 == timer1.SetTimer(3) )
                {
                      MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
                {
                      MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (new_SysReady == 39)
                {
                  break;
                }
                if (loopCounter3 > 5)
                {
                  break;
                }
              }
            }
          }
          if (new_SysInitialized == HSLLiconicSTX::FALSE)
          {
            if (loopCounter4 == 2)
            {
              HSLLiconicSTX::Terminate(myUnitID);
              dialogHandle_12.SetOutput(Translate("Incubator is not initializing.  What do you want to do?"));
              User_choice = dialogHandle_12.ShowOutput("", hslRetryCancel | hslInformation | hslDefButton1, hslInfinite);
              if (User_choice == 2)
              {
                abort;
              }
              if (mySimState == 0)
              {
                STX_returnSTATUS = HSLLiconicSTX::Initialize(myUnitID, "localhost", 3336, HSLLiconicSTX::TRACE_LEVEL_FULL, HSLLiconicSTX::FALSE);
              }
              else
              {
                STX_returnSTATUS = HSLLiconicSTX::Initialize(myUnitID, "localhost", 3336, HSLLiconicSTX::TRACE_LEVEL_FULL, HSLLiconicSTX::TRUE);
              }
              if( 0 == timer1.SetTimer(30) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              loopCounter4 = 1;
            }
          }
        }
        else
        {
          break;
          if(0){
            HSLLiconicSTX::COMMAND::WriteSetClimate(myUnitID, 4, 65, 0, 0);
          }
        }
      }
    }
    TrcTrace(mySTXTitle, Translate("Initialize finished"));
  }

  private function CheckLiconicStatus(  ) void {
    private variable STX_STATUS;
    private variable myUnitID;
    private variable myTableName;
    private variable myFileName;
    private variable mySTXTitle;
    private variable loopCounter3;
    private timer timer1;
    private variable mySimState;
    private variable new_WarningStatus;
    private variable new_GateClosedStatus;
    private variable new_ErrorCodeStatus;
    private variable new_PlateReady;
    private variable new_SysInitialized;
    private variable new_SysReady;
    private variable new_UserDoorStatus;
    private variable new_XferStatStatus;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************CheckLiconicStatus Sub**************************************"));
    Definitions(myFileName, myTableName, myUnitID, mySTXTitle, mySimState);
    if (mySimState != 1)
    {
      HSLLiconicSTX::COMMAND::GetSysStatus(myUnitID, STX_STATUS, new_SysReady, new_PlateReady, new_SysInitialized, new_XferStatStatus, new_GateClosedStatus, new_UserDoorStatus, new_WarningStatus, new_ErrorCodeStatus);
    }
    else
    {
      return;
    }
    TrcTrace(Translate("Check Liconic Status Before Loop: new_SysReady = "), new_SysReady);
    {
      loopCounter3 = 0;
      while (new_SysReady != HSLLiconicSTX::TRUE)
      {
        loopCounter3 = loopCounter3 + 1;
        TrcTrace(Translate("Check Liconic Status Top of Loop: new_SysReady = "), new_SysReady);
        HSLLiconicSTX::COMMAND::GetSysStatus(myUnitID, STX_STATUS, new_SysReady, new_PlateReady, new_SysInitialized, new_XferStatStatus, new_GateClosedStatus, new_UserDoorStatus, new_WarningStatus, new_ErrorCodeStatus);
        if (new_SysInitialized != HSLLiconicSTX::TRUE)
        {
          InitializeCarousel();
        }
        if( 0 == timer1.SetTimer(3) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (new_SysReady == HSLLiconicSTX::TRUE)
        {
          break;
        }
        TrcTrace(Translate("Check Liconic Status End of Loop: new_SysReady = "), new_SysReady);
      }
    }
  }

  function TerminateCarousel(  ) void {
    private variable myDBFileName;
    private variable myUnitID;
    private variable myDBTableName;
    private variable mySTXTitle;
    private variable mySimState;
    private dialog dialogHandle_13;
    private variable stepReturn;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************TerminateIncubator Sub**************************************"));
    Definitions(myDBFileName, myDBTableName, myUnitID, mySTXTitle, mySimState);
    TrcTrace(mySTXTitle, Translate("Termination started"));
    stepReturn = HSLLiconicSTX::Terminate(myUnitID);
    if (stepReturn == HSLLiconicSTX::FALSE)
    {
      dialogHandle_13.SetOutput(Translate("The incubator returned an error!\nPlease check logfile for details."));
      dialogHandle_13.ShowOutput(Translate("Incubator Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    TrcTrace(mySTXTitle, Translate("Termination finished"));
  }

  function ClearDBData(  ) void {
    private variable myCassette;
    private variable myDBFileName;
    private variable myShelf;
    private variable myUnitID;
    private variable myDBTableName;
    private variable mySQLCommand;
    private file READ_DB_FILE;
    private variable myCassetteArray[];
    private variable myShelfArray[];
    private variable myIndex;
    private variable myArraySize;
    private file UPDATE_DB_FILE;
    private variable mySTXTitle;
    private variable mySimState;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************ClearDBData Sub**************************************"));
    Definitions(myDBFileName, myDBTableName, myUnitID, mySTXTitle, mySimState);
    TrcTrace(mySTXTitle, Translate("Start cleanup of inventory database"));
    mySQLCommand = StrConcat4(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] IS NOT NULL"), Translate(""));
    READ_DB_FILE.AddField("Cassette", myCassette, hslString, 255);
    READ_DB_FILE.AddField("Shelf", myShelf, hslString, 255);
    if( 0 == READ_DB_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
    }
    myCassetteArray.SetSize(0);
    myShelfArray.SetSize(0);
    {
      while (
         (READ_DB_FILE.Eof() == 0)
      )
      {
        if( 0 == READ_DB_FILE.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        myCassetteArray.AddAsLast(myCassette);
        myShelfArray.AddAsLast(myShelf);
      }
    }
    if( 0 != READ_DB_FILE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    READ_DB_FILE.RemoveFields();
    mySQLCommand = StrConcat4(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [PlatePresent] =1"), Translate(""));
    READ_DB_FILE.AddField("Cassette", myCassette, hslString, 255);
    READ_DB_FILE.AddField("Shelf", myShelf, hslString, 255);
    if( 0 == READ_DB_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
    }
    {
      while (
         (READ_DB_FILE.Eof() == 0)
      )
      {
        if( 0 == READ_DB_FILE.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        myCassetteArray.AddAsLast(myCassette);
        myShelfArray.AddAsLast(myShelf);
      }
    }
    if( 0 != READ_DB_FILE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    READ_DB_FILE.RemoveFields();
    myArraySize=myCassetteArray.GetSize();
    {
      for(myIndex = 0; myIndex < myArraySize;)
      {
        myIndex = myIndex + 1;
        myCassette=myCassetteArray.GetAt(myIndex-1);
        myShelf=myShelfArray.GetAt(myIndex-1);
        mySQLCommand = StrConcat8(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL , [PlatePresent] = 0, [Status] = NULL WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""));
        if( 0 == UPDATE_DB_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
        }
        if( 0 != UPDATE_DB_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        UPDATE_DB_FILE.RemoveFields();
      }
    }
    TrcTrace(mySTXTitle, Translate("Finished cleanup of inventory database"));
  }

  function StoreNewPlate( variable iBarcode, variable & oCasette, variable & oShelf ) variable {
    private variable myDBFileName;
    private variable level;
    private variable myUnitID;
    private variable myDBTableName;
    private variable slot;
    private variable mySQLCommand;
    private file DB_LOOKUP_FILE;
    private variable retVal;
    private file DB_UPDATE_FILE;
    private variable mySTXTitle;
    private variable mySimState;
    private variable retval;
    private variable tmpBarcode;
    private variable dlgReturn;
    private variable loopCounter1;
    private variable stepReturn;
    private dialog dialogHandle_14;
    private variable oCassette;
    private dialog dialogHandle_15;
    private dialog dialogHandle_16;
    private dialog dialogHandle_17;
    private dialog dialogHandle_18;
    private dialog dialogHandle_19;
    private dialog dialogHandle_20;
    private dialog dialogHandle_21;
    oCasette = 0;
    oShelf = 0;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************StoreNewPlate Sub**************************************"));
    Definitions(myDBFileName, myDBTableName, myUnitID, mySTXTitle, mySimState);
    if (mySimState != 1)
    {
      mySQLCommand = StrConcat4(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] IS NULL"), Translate(""));
      DB_LOOKUP_FILE.AddField("Cassette", oCassette, hslString, 255);
      DB_LOOKUP_FILE.AddField("Shelf", oShelf, hslString, 255);
      if( 0 == DB_LOOKUP_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
      }
      onerror goto errLabel_22 ;
      err.Clear();
      if( 0 == DB_LOOKUP_FILE.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_22 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        if( 0 != DB_LOOKUP_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        DB_LOOKUP_FILE.RemoveFields();
        dialogHandle_14.SetOutput(Translate("There is no place left to store the current plate in the incubator as it is full."));
        dialogHandle_14.ShowOutput(Translate("Incubator's limit exceeded"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
      if( 0 != DB_LOOKUP_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      DB_LOOKUP_FILE.RemoveFields();
      slot = StrIVal(oCassette);
      level = StrIVal(oShelf);
      CheckLiconicStatus();
      TrcTrace(mySTXTitle, Translate("Start storage of new plate"));
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          stepReturn = HSLLiconicSTX::COMMAND::ServiceMovePlate(myUnitID, 1, 0, 0, 2, 0, myUnitID, 2, slot, level, 1, 0);
          if (stepReturn == HSLLiconicSTX::FALSE)
          {
            dialogHandle_20.SetOutput(Translate("The incubator returned an error moving the plate!\nPlease check logfile for details."));
            dialogHandle_20.ShowOutput(Translate("Incubator Error moving plate Store New plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if(0){
              abort;
            }
          }
          CheckLiconicStatus();
          if (iBarcode == "")
          {
            break;
            if(0){
              if (mySimState != 1)
              {
                retVal = HSLLiconicSTX::COMMAND::ServiceReadBarcode(myUnitID, slot, level, iBarcode);
              }
              else
              {
                dialogHandle_15.SetInputSize(1);
                dialogHandle_15.SetInputField(0, Translate("Plate Barcode"), hslString, "");
                dialogHandle_15.ShowInput(Translate("Liconic Simulation Barcode Entry"), hslInfinite, hslOKOnly | hslDefButton1);
                iBarcode = dialogHandle_15.GetInputField(0);
                retval = HSLLiconicSTX::TRUE;
              }
              CheckLiconicStatus();
              if (retVal == HSLLiconicSTX::FALSE)
              {
                retVal = HSLLiconicSTX::COMMAND::ServiceReadBarcode(myUnitID, slot, level, iBarcode);
                if (retVal == HSLLiconicSTX::FALSE)
                {
                  dialogHandle_16.SetOutput(Translate("LICONIC STX220 WARNING!!!"), Translate("\n\n The Barcode on the plate in Slot "), oCassette, Translate(", Level "), oShelf, Translate(" could not be read."), Translate("\nPlease check the barcode of this plate so it can be entered manually."), Translate("\n\nHit 'OK' to proceed to enter the plate barcode"));
                  dialogHandle_16.ShowOutput(Translate("Liconic STX 220 Barcode Warning"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
                  dialogHandle_17.SetInputSize(1);
                  dialogHandle_17.SetInputField(0, Translate("Plate Barcode"), hslString, "");
                  dialogHandle_17.ShowInput(Translate("Liconic STX 220 Barcode Entry"), hslInfinite, hslOKOnly | hslDefButton1);
                  iBarcode = dialogHandle_17.GetInputField(0);
                }
              }
              stepReturn = HSLLiconicSTX::COMMAND::ServiceMovePlate(myUnitID, 2, slot, level, 2, 0, myUnitID, 1, 0, 0, 1, 0);
            }
          }
          else
          {
            break;
            if(0){
              HSLLiconicSTX::COMMAND::ServiceReadBarcode(myUnitID, slot, level, tmpBarcode);
              dialogHandle_18.SetOutput(tmpBarcode);
              dialogHandle_18.ShowOutput(Translate("temp Barcode"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }
            if (tmpBarcode != iBarcode)
            {
              if(0){
                stepReturn = HSLLiconicSTX::COMMAND::ServiceMovePlate(myUnitID, 2, slot, level, 2, 0, myUnitID, 1, 0, 0, 1, 0);
                if (stepReturn == HSLLiconicSTX::FALSE)
                {
                  dialogHandle_19.SetOutput(Translate("The incubator returned an error reading the barcode!\nPlease check logfile for details."));
                  dialogHandle_19.ShowOutput(Translate("Incubator Error Barcode error in Store New Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  abort;
                }
                dialogHandle_21.SetOutput(Translate("The plate with barcode '"), tmpBarcode, Translate("' does not match the expected barcode '"), iBarcode, Translate("'!\nPlease replace it on the loading position and press OK afterwards."));
                dlgReturn = dialogHandle_21.ShowOutput(Translate("Wrong plate detected"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
              }
            }
            else
            {
              break;
            }
          }
        }
      }
      if (iBarcode != "")
      {
        mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = '"), iBarcode, Translate("' , [PlatePresent] = 1, [Status] = 'INCUBATOR' WHERE [Cassette] = '"), oCassette, Translate("' AND [Shelf] = '"), oShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
      }
      else
      {
        mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL, [PlatePresent] = 1, [Status] = 'INCUBATOR' WHERE [Cassette] = '"), oCassette, Translate("' AND [Shelf] = '"), oShelf, Translate(""), Translate(""), Translate("'"), Translate(""), Translate(""), Translate(""));
      }
      if( 0 == DB_UPDATE_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
      }
      if( 0 != DB_UPDATE_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      DB_UPDATE_FILE.RemoveFields();
      TrcTrace8(mySTXTitle, Translate("Plate "), iBarcode, Translate(" stored in Cassette "), slot, Translate(", Shelf "), level, Translate(" succesfully"));
    }
    return (iBarcode);
  }

  function InventoryCarousel_Partial( variable Partition ) variable {
    private variable shelf;
    private variable myCassette;
    private variable cassette;
    private variable mySTXTitle;
    private variable myBarcode;
    private variable myDBFileName;
    private variable myInventoryFileName;
    private variable myShelf;
    private variable myArraySize;
    private variable myUnitID;
    private variable myArrayIndex;
    private variable myDBTableName;
    private variable myStatus;
    private variable mySQLCommand;
    private file READ_DB_INVENTORY_FILE;
    private file LICONIC_INV_FILE;
    private file UPDATE_DB_INVENTORY_FILE;
    private variable shelfInventoryArray[];
    private variable nullCassetteArray[];
    private variable barcodeToRemoveArray[];
    private variable nullShelfArray[];
    private variable cassetteInventoryArray[];
    private variable barcodeInventoryArray[];
    private variable arrayIndex;
    private variable mySimState;
    private variable stepReturn;
    private timer PartialInventoryTimer_Unit1;
    private variable myInventoryFileNameCheck;
    private variable PartitionTime;
    private variable loopCounterFileCheck;
    private variable newEntry(0);
    private variable myPlate;
    private variable plateInventoryArray[];
    private dialog dialogHandle_23;
    private variable myPlatesTotal(0);
    private variable nullBarcode;
    private dialog dialogHandle_24;
    private dialog dialogHandle_25;
    private dialog dialogHandle_26;
    private variable liconicPartition;
    private variable partitionCounter;
    private variable numOfPartitions;
    private variable myZeroBasedIndex;
    private variable myPPSensor;
    private variable retValue;
    private file PARTITION_NAME_LOOKUP_FILE;
    private variable arrLiconicPartitions[];
    private variable ppSensorArray[];
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************InventoryIncubator_Partial Sub**************************************"));
    Definitions(myDBFileName, myDBTableName, myUnitID, mySTXTitle, mySimState);
    PartitionTime = 120;
    myInventoryFileName = Translate("C:\\Liconic Inventory Files\\STXCarousel_PARTIAL_INV.txt");
    if(0){
      myInventoryFileNameCheck = FilSearchPath(myInventoryFileName);
      if (myInventoryFileName == myInventoryFileNameCheck)
      {
        HSLMapReport::DeleteFile(myInventoryFileName);
      }
    }
    CheckLiconicStatus();
    TrcTrace4(mySTXTitle, Translate("Partial inventory of partition "), Partition, Translate(" started"));
    mySQLCommand = StrConcat8(Translate("SELECT DISTINCT [LiconicPartition] FROM ["), myDBTableName, Translate("] WHERE [Partition] = '"), Partition, Translate("'"), Translate(""), Translate(""), Translate(""));
    PARTITION_NAME_LOOKUP_FILE.AddField("LiconicPartition", liconicPartition, hslString, 255);
    if( 0 == PARTITION_NAME_LOOKUP_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
    }
    arrLiconicPartitions.SetSize(0);
    {
      while (
         (PARTITION_NAME_LOOKUP_FILE.Eof() == 0)
      )
      {
        if( 0 == PARTITION_NAME_LOOKUP_FILE.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        arrLiconicPartitions.AddAsLast(liconicPartition);
      }
    }
    if( 0 != PARTITION_NAME_LOOKUP_FILE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    PARTITION_NAME_LOOKUP_FILE.RemoveFields();
    if (mySimState != 1)
    {
      numOfPartitions=arrLiconicPartitions.GetSize();
      {
        for(partitionCounter = 0; partitionCounter < numOfPartitions;)
        {
          partitionCounter = partitionCounter + 1;
          HSLMapReport::DeleteFile(myInventoryFileName);
          liconicPartition=arrLiconicPartitions.GetAt(partitionCounter-1);
          stepReturn = HSLLiconicSTX::COMMAND::PartialInventoryScan(myUnitID, myInventoryFileName, liconicPartition, 1, 1);
          if( 0 == PartialInventoryTimer_Unit1.SetTimer(PartitionTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (stepReturn == HSLLiconicSTX::FALSE)
          {
            dialogHandle_25.SetOutput(Translate("The incubator returned an error!\n\nPlease check logfile for details."));
            dialogHandle_25.ShowOutput(Translate("Incubator Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            abort;
          }
          if( 0 == PartialInventoryTimer_Unit1.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          myInventoryFileNameCheck = FilSearchPath(myInventoryFileName);
          {
            loopCounterFileCheck = 0;
            while (myInventoryFileName != myInventoryFileNameCheck)
            {
              loopCounterFileCheck = loopCounterFileCheck + 1;
              if (loopCounterFileCheck > 200)
              {
                dialogHandle_24.SetOutput(Translate("STX220 Invenoty of "), Partition, Translate(" is not completing.... \n\n\n ABORT and run again......"));
                dialogHandle_24.ShowOutput(Translate("STX220 Invenoty Write File Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                abort;
              }
              else
              {
                if (loopCounterFileCheck > 20)
                {
                  dialogHandle_26.SetOutput(Translate("STX220 Invenoty of "), Partition, Translate(" is not complete.... \n\n\n Delay 20 sec......"));
                  dialogHandle_26.ShowOutput(Translate("STX220 Invenoty Delay "), hslOKOnly | hslInformation | hslDefButton1, 20);
                }
              }
              myInventoryFileNameCheck = FilSearchPath(myInventoryFileName);
            }
          }
          CheckLiconicStatus();
          TrcTrace4(mySTXTitle, Translate("Partial inventory of partition "), Partition, Translate(" complete"));
          TrcTrace(mySTXTitle, Translate("Start update of inventory database"));
          if(0){
            cassetteInventoryArray.SetSize(0);
            shelfInventoryArray.SetSize(0);
            barcodeInventoryArray.SetSize(0);
            plateInventoryArray.SetSize(0);
            LICONIC_INV_FILE.AddField(1, myBarcode, hslString, 255);
            LICONIC_INV_FILE.AddField(4, myPlate, hslInteger);
            LICONIC_INV_FILE.AddField(8, myCassette, hslString, 255);
            LICONIC_INV_FILE.AddField(9, myShelf, hslString, 255);
            LICONIC_INV_FILE.SetDelimiter(hslCSVDelimited);
            if( 0 == LICONIC_INV_FILE.Open(myInventoryFileName, hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myInventoryFileName, "HxMetEdCompCmd");
            }
            {
              while (
                 (LICONIC_INV_FILE.Eof() == 0)
              )
              {
                if( 0 == LICONIC_INV_FILE.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                barcodeInventoryArray.AddAsLast(myBarcode);
                cassetteInventoryArray.AddAsLast(myCassette);
                cassetteInventoryArray.AddAsLast(myCassette);
                shelfInventoryArray.AddAsLast(myShelf);
                nullCassetteArray.SetSize(0);
                plateInventoryArray.AddAsLast(myPlate);
                nullShelfArray.SetSize(0);
                myPlatesTotal = myPlatesTotal + myPlate;
                onerror goto errLabel_27 ;
                err.Clear();
                if (myBarcode != "")
                {
                  nullBarcode = 0;
                }
                else
                {
                  nullBarcode = 1;
                }
                errLabel_27 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  nullBarcode = 1;
                }   /* end if from skip handler if no error */
                if (nullBarcode == 0)
                {
                  mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
                  READ_DB_INVENTORY_FILE.AddField("Cassette", cassette, hslString, 255);
                  READ_DB_INVENTORY_FILE.AddField("Shelf", shelf, hslString, 255);
                  if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                  }
                  onerror goto errLabel_28 ;
                  err.Clear();
                  if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != READ_DB_INVENTORY_FILE.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  READ_DB_INVENTORY_FILE.RemoveFields();
                  errLabel_28 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    if( 0 != READ_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    READ_DB_INVENTORY_FILE.RemoveFields();
                    mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = '"), myBarcode, Translate("' , [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
                    if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                    }
                    if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    UPDATE_DB_INVENTORY_FILE.RemoveFields();
                    newEntry = newEntry + 1;
                  }   /* end if from skip handler if no error */
                }
                else
                {
                  nullCassetteArray.AddAsLast(myCassette);
                  nullShelfArray.AddAsLast(myShelf);
                }
              }
            }
            if( 0 != LICONIC_INV_FILE.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            LICONIC_INV_FILE.RemoveFields();
            myArraySize=nullCassetteArray.GetSize();
            barcodeToRemoveArray.SetSize(0);
            {
              for(myArrayIndex = 0; myArrayIndex < myArraySize;)
              {
                myArrayIndex = myArrayIndex + 1;
                myCassette=nullCassetteArray.GetAt(myArrayIndex-1);
                myShelf=nullShelfArray.GetAt(myArrayIndex-1);
                mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""));
                READ_DB_INVENTORY_FILE.AddField("Cassette", myCassette, hslString, 255);
                READ_DB_INVENTORY_FILE.AddField("Shelf", myShelf, hslString, 255);
                READ_DB_INVENTORY_FILE.AddField("Barcode", myBarcode, hslString, 255);
                READ_DB_INVENTORY_FILE.AddField("Status", myStatus, hslString, 255);
                if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                }
                if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 != READ_DB_INVENTORY_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                READ_DB_INVENTORY_FILE.RemoveFields();
                onerror goto errLabel_29 ;
                err.Clear();
                if (myStatus != "STAR_DECK")
                {
                  barcodeToRemoveArray.AddAsLast(myBarcode);
                }
                if (myBarcode != "")
                {
                }
                errLabel_29 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  TrcTrace(Translate("Error handled by system"), Translate(""));
                }   /* end if from skip handler if no error */
              }
            }
            myArraySize=barcodeToRemoveArray.GetSize();
            {
              for(myArrayIndex = 0; myArrayIndex < myArraySize;)
              {
                myArrayIndex = myArrayIndex + 1;
                myBarcode=barcodeToRemoveArray.GetAt(arrayIndex-1);
                mySQLCommand = StrConcat8(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL , [Status] = NULL WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
                if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                }
                if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                UPDATE_DB_INVENTORY_FILE.RemoveFields();
              }
            }
          }
          cassetteInventoryArray.SetSize(0);
          shelfInventoryArray.SetSize(0);
          ppSensorArray.SetSize(0);
          barcodeInventoryArray.SetSize(0);
          LICONIC_INV_FILE.AddField(1, myBarcode, hslString, 255);
          LICONIC_INV_FILE.AddField(4, myPPSensor, hslInteger);
          LICONIC_INV_FILE.AddField(8, myCassette, hslString, 255);
          LICONIC_INV_FILE.AddField(9, myShelf, hslString, 255);
          LICONIC_INV_FILE.SetDelimiter(hslCSVDelimited);
          if( 0 == LICONIC_INV_FILE.Open(myInventoryFileName, hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myInventoryFileName, "HxMetEdCompCmd");
          }
          {
            while (
               (LICONIC_INV_FILE.Eof() == 0)
            )
            {
              if( 0 == LICONIC_INV_FILE.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              barcodeInventoryArray.AddAsLast(myBarcode);
              ppSensorArray.AddAsLast(myPPSensor);
              cassetteInventoryArray.AddAsLast(myCassette);
              shelfInventoryArray.AddAsLast(myShelf);
              if (myPPSensor == 1)
              {
                onerror goto errLabel_30 ;
                err.Clear();
                if (myBarcode != "<null>")
                {
                  nullBarcode = 0;
                }
                else
                {
                  nullBarcode = 1;
                }
                errLabel_30 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  nullBarcode = 1;
                }   /* end if from skip handler if no error */
                if (nullBarcode == 0)
                {
                  mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
                  READ_DB_INVENTORY_FILE.AddField("Cassette", cassette, hslString, 255);
                  READ_DB_INVENTORY_FILE.AddField("Shelf", shelf, hslString, 255);
                  if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                  }
                  onerror goto errLabel_31 ;
                  err.Clear();
                  if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != READ_DB_INVENTORY_FILE.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  READ_DB_INVENTORY_FILE.RemoveFields();
                  errLabel_31 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    if( 0 != READ_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    READ_DB_INVENTORY_FILE.RemoveFields();
                    mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = '"), myBarcode, Translate("', [PlatePresent] = "), myPPSensor, Translate(", [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""));
                    if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                    }
                    if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    UPDATE_DB_INVENTORY_FILE.RemoveFields();
                  }   /* end if from skip handler if no error */
                }
                else
                {
                  mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL, [PlatePresent] = "), myPPSensor, Translate(", [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
                  if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                  }
                  if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  UPDATE_DB_INVENTORY_FILE.RemoveFields();
                }
              }
              else
              {
                mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL, [PlatePresent] = "), myPPSensor, Translate(", [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
                if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                }
                if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                UPDATE_DB_INVENTORY_FILE.RemoveFields();
              }
            }
          }
          if( 0 != LICONIC_INV_FILE.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          LICONIC_INV_FILE.RemoveFields();
          if(0){
            mySQLCommand = StrConcat4(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE BARCODE IS NOT NULL"), Translate(""));
          }
          mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] IS NOT NULL AND [LiconicPartition] = '"), liconicPartition, Translate("'"), Translate(""), Translate(""), Translate(""));
          READ_DB_INVENTORY_FILE.AddField("Cassette", myCassette, hslString, 255);
          READ_DB_INVENTORY_FILE.AddField("Shelf", myShelf, hslString, 255);
          READ_DB_INVENTORY_FILE.AddField("Barcode", myBarcode, hslString, 255);
          READ_DB_INVENTORY_FILE.AddField("Status", myStatus, hslString, 255);
          if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
          }
          barcodeToRemoveArray.SetSize(0);
          {
            while (
               (READ_DB_INVENTORY_FILE.Eof() == 0)
            )
            {
              if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              retValue = Util::Lookup(barcodeInventoryArray, myBarcode, myZeroBasedIndex);
              if (retValue == 0)
              {
                if (myStatus != "STAR_DECK")
                {
                  barcodeToRemoveArray.AddAsLast(myBarcode);
                }
              }
            }
          }
          if( 0 != READ_DB_INVENTORY_FILE.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          READ_DB_INVENTORY_FILE.RemoveFields();
          myArraySize=barcodeToRemoveArray.GetSize();
          {
            for(arrayIndex = 0; arrayIndex < myArraySize;)
            {
              arrayIndex = arrayIndex + 1;
              myBarcode=barcodeToRemoveArray.GetAt(arrayIndex-1);
              mySQLCommand = StrConcat8(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL , [Status] = NULL, [PlatePresent] = 0 WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
              if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
              }
              if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              UPDATE_DB_INVENTORY_FILE.RemoveFields();
            }
          }
        }
      }
    }
    if(0){
      if (myPlatesTotal != newEntry)
      {
        dialogHandle_23.SetOutput(Translate("There was a Plate Scan Discrepancy!"), Translate("\n   There where:\n\n     "), newEntry, Translate("   Barcodes Read \n\n     AND\n\n     "), myPlatesTotal, Translate("   Plates Flagged"));
        dialogHandle_23.ShowOutput(mySTXTitle, hslOKOnly | hslInformation | hslDefButton1, 5);
      }
    }
    TrcTrace(mySTXTitle, Translate("Update of inventory database complete"));
    return (newEntry);
  }

  function GetPlateNoBarcode( variable iCassette, variable iShelf, variable iRemoveFromExperiment, variable & oBarcode ) void {
    private variable mySTXTitle;
    private variable dlgReturn;
    private variable myBarcode;
    private variable mySimState;
    private variable myFiileName;
    private variable mySQLCommand;
    private variable myIncubatorID;
    private variable myTableName;
    private file LOOKUP_PLATE_POSITION_FILE;
    private variable myPPStatus;
    private dialog dialogHandle_32;
    private dialog dialogHandle_33;
    oBarcode = 0;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************GetPlateNoBarcode Sub**************************************"));
    Definitions(myFiileName, myTableName, myIncubatorID, mySTXTitle, mySimState);
    if (mySimState != 1)
    {
      mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myTableName, Translate("] WHERE [Cassette] = '"), iCassette, Translate("' AND [Shelf] = '"), iShelf, Translate("'"), Translate(""));
      TrcTrace(Translate("SQL Command is: "), mySQLCommand);
      LOOKUP_PLATE_POSITION_FILE.AddField("Barcode", myBarcode, hslString, 255);
      LOOKUP_PLATE_POSITION_FILE.AddField("PlatePresent", myPPStatus, hslInteger);
      if( 0 == LOOKUP_PLATE_POSITION_FILE.Open(myFiileName + " " + myTableName, hslRead, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFiileName, "HxMetEdCompCmd");
      }
      if( 0 == LOOKUP_PLATE_POSITION_FILE.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != LOOKUP_PLATE_POSITION_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      LOOKUP_PLATE_POSITION_FILE.RemoveFields();
      if (myPPStatus == 1)
      {
        onerror goto errLabel_34 ;
        err.Clear();
        if (myBarcode != "")
        {
          GetBarcodedPlate(myBarcode, iRemoveFromExperiment);
          oBarcode = myBarcode;
        }
        errLabel_34 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          GetNonBarcodedPlate(iCassette, iShelf);
          oBarcode = Translate("");
        }   /* end if from skip handler if no error */
      }
      else
      {
        dialogHandle_33.SetOutput(Translate("There is no plate in Cassette '"), iCassette, Translate("', Shelf '"), iShelf, Translate("'!\nPlease place a plate on the transfer location and press 'OK'.\n\n'Cancel' will abort the run!"));
        dlgReturn = dialogHandle_33.ShowOutput(Translate("Plate not found in Incubator Inventory"), hslOKCancel | hslError | hslDefButton1, hslInfinite);
        if (dlgReturn == 2)
        {
          abort;
        }
        dialogHandle_32.SetInputSize(1);
        dialogHandle_32.SetInputField(0, Translate("Please enter the plate barcode if there is one"), hslString, "");
        dialogHandle_32.ShowInput(Translate("New Plate Barcode Entry"), hslInfinite, hslOKOnly | hslDefButton1);
        oBarcode = dialogHandle_32.GetInputField(0);
      }
    }
    else
    {
      oBarcode = Translate("SimulationBarcode");
    }
  }

  function GetNewPlateFromPartition( variable iPartition, variable iRemovePlateFromExperiment ) variable {
    private variable mySTXTitle;
    private variable myDBFileName;
    private variable myUnitID;
    private variable mySimState;
    private variable myDBTableName;
    private variable mySQLCommand;
    private variable myCassette;
    private variable myShelf;
    private file DB_LOOKUP_FILE;
    private variable retryChoice;
    private variable fileReadCounter;
    private variable myBarcode;
    private dialog dialogHandle_35;
    private dialog dialogHandle_36;
    private dialog dialogHandle1;
    private dialog dialogHandle_37;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************GetNewPlateFromPartition Sub**************************************"));
    Definitions(myDBFileName, myDBTableName, myUnitID, mySTXTitle, mySimState);
    if (mySimState != 1)
    {
      mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Partition] = '"), iPartition, Translate("' AND [PlatePresent] = 1 AND [Status] = 'INCUBATOR' ORDER BY[CassetteSortIndex] ASC, [ShelfSortIndex] ASC"), Translate(""), Translate(""), Translate(""));
      TrcTrace(Translate("SQL STATEMENT:  "), mySQLCommand);
      if(0){
        mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Partition] = '"), iPartition, Translate("' AND [Barcode] IS NOT NULL AND [Status] = 'INCUBATOR' ORDER BY[CassetteSortIndex] ASC, [ShelfSortIndex] ASC"), Translate(""), Translate(""), Translate(""));
      }
      DB_LOOKUP_FILE.AddField("Cassette", myCassette, hslString, 255);
      DB_LOOKUP_FILE.AddField("Shelf", myShelf, hslString, 255);
      DB_LOOKUP_FILE.AddField("Barcode", myBarcode, hslString, 255);
      if( 0 == DB_LOOKUP_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
      }
      {
        fileReadCounter = 0;
        while (1 == 1)
        {
          fileReadCounter = fileReadCounter + 1;
          onerror goto errLabel_38 ;
          err.Clear();
          if( 0 == DB_LOOKUP_FILE.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          break;
          errLabel_38 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            if( 0 != DB_LOOKUP_FILE.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            DB_LOOKUP_FILE.RemoveFields();
            if (fileReadCounter == 1)
            {
              dialogHandle1.SetOutput(Translate("Need to inventory!"));
              dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              if(0){
                InventoryCarousel_Partial(iPartition);
              }
            }
            if (fileReadCounter == 2)
            {
              dialogHandle_36.SetOutput(Translate("The Liconic STX Unit has no plates in specific partition \""), iPartition, Translate("\".\n\nPlease add plates to the partition and try again!"), Translate("\n\n\"Cancel\" will abort the method!"));
              retryChoice = dialogHandle_36.ShowOutput("", hslRetryCancel | hslInformation | hslDefButton1, hslInfinite);
              if (retryChoice != 2)
              {
                dialogHandle_37.SetOutput(Translate("Need to inventory!"));
                dialogHandle_37.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if(0){
                  InventoryCarousel_Partial(iPartition);
                }
              }
              else
              {
                abort;
              }
            }
            if (fileReadCounter == 3)
            {
              dialogHandle_35.SetOutput(Translate("The Liconic STX Unit has no plates in specific partition \""), iPartition, Translate("\".\n\nThe method will be aborted!"));
              dialogHandle_35.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, 600);
              abort;
            }
          }   /* end if from skip handler if no error */
        }
      }
      if( 0 != DB_LOOKUP_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      DB_LOOKUP_FILE.RemoveFields();
      onerror goto errLabel_39 ;
      err.Clear();
      if (myBarcode != "")
      {
        GetBarcodedPlate(myBarcode, iRemovePlateFromExperiment);
      }
      errLabel_39 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        GetNonBarcodedPlate(myCassette, myShelf);
      }   /* end if from skip handler if no error */
    }
    else
    {
      myBarcode = Translate("SimulationBarcode");
    }
    return (myBarcode);
  }

  function StoreNewPlateInPartition( variable iBarcode, variable iPartition ) void {
    private variable mySTXTitle;
    private variable myDBFileName;
    private variable myUnitID;
    private variable mySimState;
    private variable myDBTableName;
    private variable mySQLCommand;
    private variable retVal;
    private variable myCassette;
    private variable tmpBarcode;
    private variable dlgReturn;
    private variable loopCounter1;
    private variable myShelf;
    private variable stepReturn;
    private variable level;
    private variable fileReadCounter;
    private variable slot;
    private variable retval;
    private file DB_UPDATE_FILE;
    private file DB_LOOKUP_FILE;
    private dialog dialogHandle_40;
    private dialog dialogHandle_41;
    private dialog dialogHandle_42;
    private dialog dialogHandle_43;
    private dialog dialogHandle_44;
    private dialog dialogHandle_45;
    private dialog dialogHandle_46;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************StoreNewPlateInPartition Sub**************************************"));
    Definitions(myDBFileName, myDBTableName, myUnitID, mySTXTitle, mySimState);
    if (mySimState != 1)
    {
      mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] IS NULL AND [PlatePresent] = 0 AND [Partition] = '"), iPartition, Translate("' ORDER BY [CassetteSortIndex] ASC, [ShelfSortIndex] ASC"), Translate(""), Translate(""), Translate(""));
      DB_LOOKUP_FILE.AddField("Cassette", myCassette, hslString, 255);
      DB_LOOKUP_FILE.AddField("Shelf", myShelf, hslString, 255);
      if( 0 == DB_LOOKUP_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
      }
      {
        fileReadCounter = 0;
        while (1 == 1)
        {
          fileReadCounter = fileReadCounter + 1;
          onerror goto errLabel_47 ;
          err.Clear();
          if( 0 == DB_LOOKUP_FILE.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          break;
          errLabel_47 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            if( 0 != DB_LOOKUP_FILE.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            DB_LOOKUP_FILE.RemoveFields();
            if (fileReadCounter == 2)
            {
              dialogHandle_43.SetOutput(Translate("The Liconic STX Unit is full in the specifiec partition \""), iPartition, Translate("\".\n\nThe method will abort!"));
              dialogHandle_43.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              abort;
            }
            InventoryCarousel_Partial(iPartition);
          }   /* end if from skip handler if no error */
        }
      }
      if( 0 != DB_LOOKUP_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      DB_LOOKUP_FILE.RemoveFields();
      slot = StrIVal(myCassette);
      level = StrIVal(myShelf);
      CheckLiconicStatus();
      TrcTrace(mySTXTitle, Translate("Start storage of new plate"));
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          stepReturn = HSLLiconicSTX::COMMAND::ServiceMovePlate(myUnitID, 1, 0, 0, 2, 0, myUnitID, 2, slot, level, 1, 0);
          if (stepReturn == HSLLiconicSTX::FALSE)
          {
            dialogHandle_44.SetOutput(Translate("The incubator returned an error moving the plate!\nPlease check logfile for details."));
            dialogHandle_44.ShowOutput(Translate("Incubator Error moving plate Store New plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            abort;
          }
          CheckLiconicStatus();
          if (iBarcode == "")
          {
            mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = '"), Translate("NULL"), Translate(", [PlatePresent] = 1, [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
            break;
            if(0){
              if (mySimState != 1)
              {
              }
              else
              {
                dialogHandle_42.SetInputSize(1);
                dialogHandle_42.SetInputField(0, Translate("Plate Barcode"), hslString, "");
                dialogHandle_42.ShowInput(Translate("Liconic Simulation Barcode Entry"), hslInfinite, hslOKOnly | hslDefButton1);
                iBarcode = dialogHandle_42.GetInputField(0);
                retval = HSLLiconicSTX::TRUE;
              }
              retVal = HSLLiconicSTX::COMMAND::ServiceReadBarcode(myUnitID, slot, level, iBarcode);
              CheckLiconicStatus();
              if (retVal == HSLLiconicSTX::FALSE)
              {
                retVal = HSLLiconicSTX::COMMAND::ServiceReadBarcode(myUnitID, slot, level, iBarcode);
                if (retVal == HSLLiconicSTX::FALSE)
                {
                  dialogHandle_41.SetOutput(Translate("LICONIC STX220 WARNING!!!"), Translate("\n\n The Barcode on the plate in Slot "), myCassette, Translate(", Level "), myShelf, Translate(" could not be read."), Translate("\nPlease check the barcode of this plate so it can be entered manually."), Translate("\n\nHit 'OK' to proceed to enter the plate barcode"));
                  dialogHandle_41.ShowOutput(Translate("Liconic STX 220 Barcode Warning"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
                  dialogHandle_40.SetInputSize(1);
                  dialogHandle_40.SetInputField(0, Translate("Plate Barcode"), hslString, "");
                  dialogHandle_40.ShowInput(Translate("Liconic STX 220 Barcode Entry"), hslInfinite, hslOKOnly | hslDefButton1);
                  iBarcode = dialogHandle_40.GetInputField(0);
                }
              }
            }
          }
          else
          {
            mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = '"), iBarcode, Translate("', [PlatePresent] = 1, [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
            break;
            if(0){
              HSLLiconicSTX::COMMAND::ServiceReadBarcode(myUnitID, slot, level, tmpBarcode);
              if (tmpBarcode != iBarcode)
              {
                stepReturn = HSLLiconicSTX::COMMAND::ServiceMovePlate(myUnitID, 2, slot, level, 2, 0, myUnitID, 1, 0, 0, 1, 0);
                if (stepReturn == HSLLiconicSTX::FALSE)
                {
                  dialogHandle_46.SetOutput(Translate("The incubator returned an error reading the barcode!\nPlease check logfile for details."));
                  dialogHandle_46.ShowOutput(Translate("Incubator Error Barcode error in Store New Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  abort;
                }
                dialogHandle_45.SetOutput(Translate("The plate with barcode '"), tmpBarcode, Translate("' does not match the expected barcode '"), iBarcode, Translate("'!\nPlease replace it on the loading position and press OK afterwards."));
                dlgReturn = dialogHandle_45.ShowOutput(Translate("Wrong plate detected"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
              }
              else
              {
                break;
              }
            }
          }
        }
      }
      if( 0 == DB_UPDATE_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
      }
      if( 0 != DB_UPDATE_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      DB_UPDATE_FILE.RemoveFields();
      TrcTrace8(mySTXTitle, Translate("Plate "), iBarcode, Translate(" stored in Cassette "), slot, Translate(", Shelf "), level, Translate(" succesfully"));
    }
  }

  function StorePlateAsUsed( variable iBarcode, variable & oCassette, variable & oShelf ) void {
    private dialog dialogHandle_48;
    private variable myPlateStatus;
    private variable mySTXTitle;
    private variable myBarcode;
    private variable level;
    private variable stepReturn;
    private variable mySimState;
    private variable mySQLCommand;
    private variable slot;
    private variable myFiileName;
    private variable myIncubatorID;
    private variable myTableName;
    private file UPDATE_STATUS_FILE;
    private file LOOKUP_PLATE_POSITION_FILE;
    private dialog dialogHandle_49;
    oCassette = 0;
    oShelf = 0;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************StorePlate Sub**************************************"));
    Definitions(myFiileName, myTableName, myIncubatorID, mySTXTitle, mySimState);
    if (mySimState != 1)
    {
      mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myTableName, Translate("] WHERE [Barcode] = '"), iBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
      LOOKUP_PLATE_POSITION_FILE.AddField("Cassette", oCassette, hslString, 255);
      LOOKUP_PLATE_POSITION_FILE.AddField("Shelf", oShelf, hslString, 255);
      LOOKUP_PLATE_POSITION_FILE.AddField("Barcode", myBarcode, hslString, 255);
      LOOKUP_PLATE_POSITION_FILE.AddField("Status", myPlateStatus, hslString, 255);
      if( 0 == LOOKUP_PLATE_POSITION_FILE.Open(myFiileName + " " + myTableName, hslRead, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFiileName, "HxMetEdCompCmd");
      }
      onerror goto errLabel_50 ;
      err.Clear();
      if( 0 == LOOKUP_PLATE_POSITION_FILE.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_50 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        if( 0 != LOOKUP_PLATE_POSITION_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        LOOKUP_PLATE_POSITION_FILE.RemoveFields();
        dialogHandle_49.SetOutput(Translate("The plate with barcode '"), iBarcode, Translate("' could not be found in incubator inventory!\nYou cannot store back an unknown plate."));
        dialogHandle_49.ShowOutput(Translate("Barcode not found in Incubator Inventory"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
      slot = StrIVal(oCassette);
      level = StrIVal(oShelf);
      CheckLiconicStatus();
      TrcTrace8(mySTXTitle, Translate("Replacing Plate "), iBarcode, Translate(" in Cassette "), slot, Translate(", Shelf "), level, Translate(" started"));
      if (mySimState != 1)
      {
        stepReturn = HSLLiconicSTX::COMMAND::ServiceMovePlate(myIncubatorID, 1, 0, 0, 2, 0, myIncubatorID, 2, slot, level, 1, 0);
        if (stepReturn == HSLLiconicSTX::FALSE)
        {
          dialogHandle_48.SetOutput(Translate("The incubator returned an error!\nPlease check logfile for details."));
          dialogHandle_48.ShowOutput(Translate("Incubator Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }
      }
      CheckLiconicStatus();
      TrcTrace4(mySTXTitle, Translate("Replace Plate "), iBarcode, Translate(" complete"));
      mySQLCommand = StrConcat8(Translate("UPDATE ["), myTableName, Translate("] SET [PlatePresent] = 1, [Status] = 'INCUBATOR_USED' WHERE [Cassette] = '"), oCassette, Translate("' AND [Shelf] = '"), oShelf, Translate("'"), Translate(""));
      if( 0 == UPDATE_STATUS_FILE.Open(myFiileName + " " + myTableName, hslAppend, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFiileName, "HxMetEdCompCmd");
      }
      if( 0 != UPDATE_STATUS_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      UPDATE_STATUS_FILE.RemoveFields();
    }
    else
    {
      oCassette = 1;
      oShelf = 1;
    }
  }

  function StorePlateAsInProcess( variable iBarcode, variable & oCassette, variable & oShelf ) void {
    private dialog dialogHandle_51;
    private variable myPlateStatus;
    private variable mySTXTitle;
    private variable myBarcode;
    private variable stepReturn;
    private variable level;
    private variable mySimState;
    private variable slot;
    private variable mySQLCommand;
    private variable myFiileName;
    private variable myIncubatorID;
    private variable myTableName;
    private file UPDATE_STATUS_FILE;
    private file LOOKUP_PLATE_POSITION_FILE;
    private dialog dialogHandle_52;
    oCassette = 0;
    oShelf = 0;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************StorePlate Sub**************************************"));
    Definitions(myFiileName, myTableName, myIncubatorID, mySTXTitle, mySimState);
    if (mySimState != 1)
    {
      mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myTableName, Translate("] WHERE [Barcode] = '"), iBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
      LOOKUP_PLATE_POSITION_FILE.AddField("Cassette", oCassette, hslString, 255);
      LOOKUP_PLATE_POSITION_FILE.AddField("Shelf", oShelf, hslString, 255);
      LOOKUP_PLATE_POSITION_FILE.AddField("Barcode", myBarcode, hslString, 255);
      LOOKUP_PLATE_POSITION_FILE.AddField("Status", myPlateStatus, hslString, 255);
      if( 0 == LOOKUP_PLATE_POSITION_FILE.Open(myFiileName + " " + myTableName, hslRead, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFiileName, "HxMetEdCompCmd");
      }
      onerror goto errLabel_53 ;
      err.Clear();
      if( 0 == LOOKUP_PLATE_POSITION_FILE.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_53 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        if( 0 != LOOKUP_PLATE_POSITION_FILE.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        LOOKUP_PLATE_POSITION_FILE.RemoveFields();
        dialogHandle_52.SetOutput(Translate("The plate with barcode '"), iBarcode, Translate("' could not be found in incubator inventory!\nYou cannot store back an unknown plate."));
        dialogHandle_52.ShowOutput(Translate("Barcode not found in Incubator Inventory"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
      slot = StrIVal(oCassette);
      level = StrIVal(oShelf);
      CheckLiconicStatus();
      TrcTrace8(mySTXTitle, Translate("Replacing Plate "), iBarcode, Translate(" in Cassette "), slot, Translate(", Shelf "), level, Translate(" started"));
      if (mySimState != 1)
      {
        stepReturn = HSLLiconicSTX::COMMAND::ServiceMovePlate(myIncubatorID, 1, 0, 0, 2, 0, myIncubatorID, 2, slot, level, 1, 0);
        if (stepReturn == HSLLiconicSTX::FALSE)
        {
          dialogHandle_51.SetOutput(Translate("The incubator returned an error!\nPlease check logfile for details."));
          dialogHandle_51.ShowOutput(Translate("Incubator Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }
      }
      CheckLiconicStatus();
      TrcTrace4(mySTXTitle, Translate("Replace Plate "), iBarcode, Translate(" complete"));
      mySQLCommand = StrConcat8(Translate("UPDATE ["), myTableName, Translate("] SET [PlatePresent] = 1, [Status] = 'INCUBATOR_IN_PROCESS' WHERE [Cassette] = '"), oCassette, Translate("' AND [Shelf] = '"), oShelf, Translate("'"), Translate(""));
      if( 0 == UPDATE_STATUS_FILE.Open(myFiileName + " " + myTableName, hslAppend, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFiileName, "HxMetEdCompCmd");
      }
      if( 0 != UPDATE_STATUS_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      UPDATE_STATUS_FILE.RemoveFields();
    }
    else
    {
      oCassette = Translate("1");
      oShelf = Translate("1");
    }
  }

  private function GetNonBarcodedPlate( variable iCassette, variable iShelf ) void {
    private dialog dialogHandle_54;
    private variable mySTXTitle;
    private variable stepReturn;
    private variable level;
    private variable mySimState;
    private variable mySQLCommand;
    private variable slot;
    private variable myFiileName;
    private variable myIncubatorID;
    private variable myTableName;
    private file REMOVE_BARCODE_FILE;
    Definitions(myFiileName, myTableName, myIncubatorID, mySTXTitle, mySimState);
    slot = StrIVal(iCassette);
    level = StrIVal(iShelf);
    TrcTrace8(mySTXTitle, Translate("::Get non-barcoded plate from cassette "), iCassette, Translate("; shelf "), iShelf, Translate("Started"), Translate(""), Translate(""));
    CheckLiconicStatus();
    stepReturn = HSLLiconicSTX::COMMAND::ServiceMovePlate(myIncubatorID, 2, slot, level, 1, 0, myIncubatorID, 1, 0, 0, 2, 0);
    if (stepReturn == HSLLiconicSTX::FALSE)
    {
      dialogHandle_54.SetOutput(Translate("The incubator returned an error!\nPlease check logfile for details."));
      dialogHandle_54.ShowOutput(Translate("Incubator Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    CheckLiconicStatus();
    TrcTrace8(mySTXTitle, Translate("::Get non-barcoded plate from cassette "), iCassette, Translate("; shelf "), iShelf, Translate("Finished"), Translate(""), Translate(""));
    mySQLCommand = StrConcat8(Translate("UPDATE ["), myTableName, Translate("] SET [Barcode] = NULL, [PlatePresent] = 0,  [Status] = NULL WHERE [Cassette] = '"), iCassette, Translate("' AND [Shelf] = '"), iShelf, Translate("'"), Translate(""));
    TrcTrace(Translate("SQL COMMAND:  "), mySQLCommand);
    if( 0 == REMOVE_BARCODE_FILE.Open(myFiileName + " " + myTableName, hslAppend, mySQLCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myFiileName, "HxMetEdCompCmd");
    }
    if( 0 != REMOVE_BARCODE_FILE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    REMOVE_BARCODE_FILE.RemoveFields();
  }

  function InventoryCarousel_PartialVariableDelay( variable Partition, variable PartitionTime ) variable {
    private dialog dialogHandle_55;
    private dialog dialogHandle_56;
    private dialog dialogHandle_57;
    private dialog dialogHandle_58;
    private variable liconicPartition;
    private variable shelf;
    private variable newEntry;
    private variable myCassette;
    private variable cassette;
    private variable myPlatesTotal;
    private variable mySTXTitle;
    private variable myPlate;
    private variable myBarcode;
    private variable partitionCounter;
    private variable myDBFileName;
    private variable numOfPartitions;
    private variable myInventoryFileName;
    private variable arrayIndex;
    private variable myShelf;
    private variable loopCounterFileCheck;
    private variable nullBarcode;
    private variable myUnitID;
    private variable myZeroBasedIndex;
    private variable myArraySize;
    private variable stepReturn;
    private variable myInventoryFileNameCheck;
    private variable myPPSensor;
    private variable mySimState;
    private variable myDBTableName;
    private variable retValue;
    private variable myArrayIndex;
    private variable myStatus;
    private variable mySQLCommand;
    private timer PartialInventoryTimer_Unit1;
    private file READ_DB_INVENTORY_FILE;
    private file LICONIC_INV_FILE;
    private file PARTITION_NAME_LOOKUP_FILE;
    private file UPDATE_DB_INVENTORY_FILE;
    private variable arrLiconicPartitions[];
    private variable shelfInventoryArray[];
    private variable nullCassetteArray[];
    private variable barcodeToRemoveArray[];
    private variable nullShelfArray[];
    private variable cassetteInventoryArray[];
    private variable plateInventoryArray[];
    private variable barcodeInventoryArray[];
    private variable ppSensorArray[];
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************InventoryIncubator_Partial Sub**************************************"));
    Definitions(myDBFileName, myDBTableName, myUnitID, mySTXTitle, mySimState);
    if(0){
      PartitionTime = 120;
    }
    myInventoryFileName = Translate("C:\\Liconic Inventory Files\\STXCarousel_PARTIAL_INV.txt");
    if(0){
      myInventoryFileNameCheck = FilSearchPath(myInventoryFileName);
      if (myInventoryFileName == myInventoryFileNameCheck)
      {
        HSLMapReport::DeleteFile(myInventoryFileName);
      }
    }
    CheckLiconicStatus();
    TrcTrace4(mySTXTitle, Translate("Partial inventory of partition "), Partition, Translate(" started"));
    mySQLCommand = StrConcat8(Translate("SELECT DISTINCT [LiconicPartition] FROM ["), myDBTableName, Translate("] WHERE [Partition] = '"), Partition, Translate("'"), Translate(""), Translate(""), Translate(""));
    PARTITION_NAME_LOOKUP_FILE.AddField("LiconicPartition", liconicPartition, hslString, 255);
    if( 0 == PARTITION_NAME_LOOKUP_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
    }
    arrLiconicPartitions.SetSize(0);
    {
      while (
         (PARTITION_NAME_LOOKUP_FILE.Eof() == 0)
      )
      {
        if( 0 == PARTITION_NAME_LOOKUP_FILE.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        arrLiconicPartitions.AddAsLast(liconicPartition);
      }
    }
    if( 0 != PARTITION_NAME_LOOKUP_FILE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    PARTITION_NAME_LOOKUP_FILE.RemoveFields();
    if (mySimState != 1)
    {
      numOfPartitions=arrLiconicPartitions.GetSize();
      {
        for(partitionCounter = 0; partitionCounter < numOfPartitions;)
        {
          partitionCounter = partitionCounter + 1;
          HSLMapReport::DeleteFile(myInventoryFileName);
          liconicPartition=arrLiconicPartitions.GetAt(partitionCounter-1);
          stepReturn = HSLLiconicSTX::COMMAND::PartialInventoryScan(myUnitID, myInventoryFileName, liconicPartition, 1, 1);
          if( 0 == PartialInventoryTimer_Unit1.SetTimer(PartitionTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (stepReturn == HSLLiconicSTX::FALSE)
          {
            dialogHandle_55.SetOutput(Translate("The incubator returned an error!\n\nPlease check logfile for details."));
            dialogHandle_55.ShowOutput(Translate("Incubator Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            abort;
          }
          if( 0 == PartialInventoryTimer_Unit1.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          myInventoryFileNameCheck = FilSearchPath(myInventoryFileName);
          {
            loopCounterFileCheck = 0;
            while (myInventoryFileName != myInventoryFileNameCheck)
            {
              loopCounterFileCheck = loopCounterFileCheck + 1;
              if (loopCounterFileCheck > 200)
              {
                dialogHandle_57.SetOutput(Translate("STX220 Invenoty of "), Partition, Translate(" is not completing.... \n\n\n ABORT and run again......"));
                dialogHandle_57.ShowOutput(Translate("STX220 Invenoty Write File Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                abort;
              }
              else
              {
                if (loopCounterFileCheck > 20)
                {
                  dialogHandle_58.SetOutput(Translate("STX220 Invenoty of "), Partition, Translate(" is not complete.... \n\n\n Delay 20 sec......"));
                  dialogHandle_58.ShowOutput(Translate("STX220 Invenoty Delay "), hslOKOnly | hslInformation | hslDefButton1, 20);
                }
              }
              myInventoryFileNameCheck = FilSearchPath(myInventoryFileName);
            }
          }
          CheckLiconicStatus();
          TrcTrace4(mySTXTitle, Translate("Partial inventory of partition "), Partition, Translate(" complete"));
          TrcTrace(mySTXTitle, Translate("Start update of inventory database"));
          if(0){
            cassetteInventoryArray.SetSize(0);
            shelfInventoryArray.SetSize(0);
            barcodeInventoryArray.SetSize(0);
            plateInventoryArray.SetSize(0);
            LICONIC_INV_FILE.AddField(1, myBarcode, hslString, 255);
            LICONIC_INV_FILE.AddField(4, myPlate, hslInteger);
            LICONIC_INV_FILE.AddField(8, myCassette, hslString, 255);
            LICONIC_INV_FILE.AddField(9, myShelf, hslString, 255);
            LICONIC_INV_FILE.SetDelimiter(hslCSVDelimited);
            if( 0 == LICONIC_INV_FILE.Open(myInventoryFileName, hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myInventoryFileName, "HxMetEdCompCmd");
            }
            {
              while (
                 (LICONIC_INV_FILE.Eof() == 0)
              )
              {
                if( 0 == LICONIC_INV_FILE.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                barcodeInventoryArray.AddAsLast(myBarcode);
                cassetteInventoryArray.AddAsLast(myCassette);
                cassetteInventoryArray.AddAsLast(myCassette);
                shelfInventoryArray.AddAsLast(myShelf);
                nullCassetteArray.SetSize(0);
                plateInventoryArray.AddAsLast(myPlate);
                nullShelfArray.SetSize(0);
                myPlatesTotal = myPlatesTotal + myPlate;
                onerror goto errLabel_59 ;
                err.Clear();
                if (myBarcode != "")
                {
                  nullBarcode = 0;
                }
                else
                {
                  nullBarcode = 1;
                }
                errLabel_59 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  nullBarcode = 1;
                }   /* end if from skip handler if no error */
                if (nullBarcode == 0)
                {
                  mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
                  READ_DB_INVENTORY_FILE.AddField("Cassette", cassette, hslString, 255);
                  READ_DB_INVENTORY_FILE.AddField("Shelf", shelf, hslString, 255);
                  if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                  }
                  onerror goto errLabel_60 ;
                  err.Clear();
                  if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != READ_DB_INVENTORY_FILE.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  READ_DB_INVENTORY_FILE.RemoveFields();
                  errLabel_60 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    if( 0 != READ_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    READ_DB_INVENTORY_FILE.RemoveFields();
                    mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = '"), myBarcode, Translate("' , [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
                    if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                    }
                    if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    UPDATE_DB_INVENTORY_FILE.RemoveFields();
                    newEntry = newEntry + 1;
                  }   /* end if from skip handler if no error */
                }
                else
                {
                  nullCassetteArray.AddAsLast(myCassette);
                  nullShelfArray.AddAsLast(myShelf);
                }
              }
            }
            if( 0 != LICONIC_INV_FILE.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            LICONIC_INV_FILE.RemoveFields();
            myArraySize=nullCassetteArray.GetSize();
            barcodeToRemoveArray.SetSize(0);
            {
              for(myArrayIndex = 0; myArrayIndex < myArraySize;)
              {
                myArrayIndex = myArrayIndex + 1;
                myCassette=nullCassetteArray.GetAt(myArrayIndex-1);
                myShelf=nullShelfArray.GetAt(myArrayIndex-1);
                mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""));
                READ_DB_INVENTORY_FILE.AddField("Cassette", myCassette, hslString, 255);
                READ_DB_INVENTORY_FILE.AddField("Shelf", myShelf, hslString, 255);
                READ_DB_INVENTORY_FILE.AddField("Barcode", myBarcode, hslString, 255);
                READ_DB_INVENTORY_FILE.AddField("Status", myStatus, hslString, 255);
                if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                }
                if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 != READ_DB_INVENTORY_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                READ_DB_INVENTORY_FILE.RemoveFields();
                onerror goto errLabel_61 ;
                err.Clear();
                if (myStatus != "STAR_DECK")
                {
                  barcodeToRemoveArray.AddAsLast(myBarcode);
                }
                if (myBarcode != "")
                {
                }
                errLabel_61 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  TrcTrace(Translate("Error handled by system"), Translate(""));
                }   /* end if from skip handler if no error */
              }
            }
            myArraySize=barcodeToRemoveArray.GetSize();
            {
              for(myArrayIndex = 0; myArrayIndex < myArraySize;)
              {
                myArrayIndex = myArrayIndex + 1;
                myBarcode=barcodeToRemoveArray.GetAt(arrayIndex-1);
                mySQLCommand = StrConcat8(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL , [Status] = NULL WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
                if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                }
                if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                UPDATE_DB_INVENTORY_FILE.RemoveFields();
              }
            }
          }
          cassetteInventoryArray.SetSize(0);
          shelfInventoryArray.SetSize(0);
          ppSensorArray.SetSize(0);
          barcodeInventoryArray.SetSize(0);
          LICONIC_INV_FILE.AddField(1, myBarcode, hslString, 255);
          LICONIC_INV_FILE.AddField(4, myPPSensor, hslInteger);
          LICONIC_INV_FILE.AddField(8, myCassette, hslString, 255);
          LICONIC_INV_FILE.AddField(9, myShelf, hslString, 255);
          LICONIC_INV_FILE.SetDelimiter(hslCSVDelimited);
          if( 0 == LICONIC_INV_FILE.Open(myInventoryFileName, hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myInventoryFileName, "HxMetEdCompCmd");
          }
          {
            while (
               (LICONIC_INV_FILE.Eof() == 0)
            )
            {
              if( 0 == LICONIC_INV_FILE.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              barcodeInventoryArray.AddAsLast(myBarcode);
              ppSensorArray.AddAsLast(myPPSensor);
              cassetteInventoryArray.AddAsLast(myCassette);
              shelfInventoryArray.AddAsLast(myShelf);
              if (myPPSensor == 1)
              {
                onerror goto errLabel_62 ;
                err.Clear();
                if (myBarcode != "<null>")
                {
                  nullBarcode = 0;
                }
                else
                {
                  nullBarcode = 1;
                }
                errLabel_62 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  nullBarcode = 1;
                }   /* end if from skip handler if no error */
                if (nullBarcode == 0)
                {
                  mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
                  READ_DB_INVENTORY_FILE.AddField("Cassette", cassette, hslString, 255);
                  READ_DB_INVENTORY_FILE.AddField("Shelf", shelf, hslString, 255);
                  if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                  }
                  onerror goto errLabel_63 ;
                  err.Clear();
                  if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != READ_DB_INVENTORY_FILE.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  READ_DB_INVENTORY_FILE.RemoveFields();
                  errLabel_63 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    if( 0 != READ_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    READ_DB_INVENTORY_FILE.RemoveFields();
                    mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = '"), myBarcode, Translate("', [PlatePresent] = "), myPPSensor, Translate(", [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""));
                    if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                    }
                    if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    UPDATE_DB_INVENTORY_FILE.RemoveFields();
                  }   /* end if from skip handler if no error */
                }
                else
                {
                  mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL, [PlatePresent] = "), myPPSensor, Translate(", [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
                  if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                  }
                  if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  UPDATE_DB_INVENTORY_FILE.RemoveFields();
                }
              }
              else
              {
                mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL, [PlatePresent] = "), myPPSensor, Translate(", [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
                if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                }
                if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                UPDATE_DB_INVENTORY_FILE.RemoveFields();
              }
            }
          }
          if( 0 != LICONIC_INV_FILE.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          LICONIC_INV_FILE.RemoveFields();
          if(0){
            mySQLCommand = StrConcat4(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE BARCODE IS NOT NULL"), Translate(""));
          }
          mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] IS NOT NULL AND [LiconicPartition] = '"), liconicPartition, Translate("'"), Translate(""), Translate(""), Translate(""));
          READ_DB_INVENTORY_FILE.AddField("Cassette", myCassette, hslString, 255);
          READ_DB_INVENTORY_FILE.AddField("Shelf", myShelf, hslString, 255);
          READ_DB_INVENTORY_FILE.AddField("Barcode", myBarcode, hslString, 255);
          READ_DB_INVENTORY_FILE.AddField("Status", myStatus, hslString, 255);
          if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
          }
          barcodeToRemoveArray.SetSize(0);
          {
            while (
               (READ_DB_INVENTORY_FILE.Eof() == 0)
            )
            {
              if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              retValue = Util::Lookup(barcodeInventoryArray, myBarcode, myZeroBasedIndex);
              if (retValue == 0)
              {
                if (myStatus != "STAR_DECK")
                {
                  barcodeToRemoveArray.AddAsLast(myBarcode);
                }
              }
            }
          }
          if( 0 != READ_DB_INVENTORY_FILE.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          READ_DB_INVENTORY_FILE.RemoveFields();
          myArraySize=barcodeToRemoveArray.GetSize();
          {
            for(arrayIndex = 0; arrayIndex < myArraySize;)
            {
              arrayIndex = arrayIndex + 1;
              myBarcode=barcodeToRemoveArray.GetAt(arrayIndex-1);
              mySQLCommand = StrConcat8(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL , [Status] = NULL, [PlatePresent] = 0 WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
              if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
              }
              if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              UPDATE_DB_INVENTORY_FILE.RemoveFields();
            }
          }
        }
      }
    }
    if(0){
      if (myPlatesTotal != newEntry)
      {
        dialogHandle_56.SetOutput(Translate("There was a Plate Scan Discrepancy!"), Translate("\n   There where:\n\n     "), newEntry, Translate("   Barcodes Read \n\n     AND\n\n     "), myPlatesTotal, Translate("   Plates Flagged"));
        dialogHandle_56.ShowOutput(mySTXTitle, hslOKOnly | hslInformation | hslDefButton1, 5);
      }
    }
    TrcTrace(mySTXTitle, Translate("Update of inventory database complete"));
    return (newEntry);
  }

  private function InventoryCarousel_PartialTrueName( variable Partition ) variable {
    private dialog dialogHandle_64;
    private dialog dialogHandle_65;
    private dialog dialogHandle_66;
    private dialog dialogHandle_67;
    private dialog dialogHandle_68;
    private variable liconicPartition;
    private variable shelf;
    private variable PartitionTime;
    private variable newEntry;
    private variable myCassette;
    private variable cassette;
    private variable myPlatesTotal;
    private variable mySTXTitle;
    private variable myPlate;
    private variable partitionCounter;
    private variable myBarcode;
    private variable myDBFileName;
    private variable numOfPartitions;
    private variable myInventoryFileName;
    private variable loopCounterFileCheck;
    private variable arrayIndex;
    private variable nullBarcode;
    private variable myShelf;
    private variable myZeroBasedIndex;
    private variable myUnitID;
    private variable myInventoryFileNameCheck;
    private variable stepReturn;
    private variable myArraySize;
    private variable myPPSensor;
    private variable mySimState;
    private variable retValue;
    private variable myArrayIndex;
    private variable myDBTableName;
    private variable mySQLCommand;
    private variable myStatus;
    private timer PartialInventoryTimer_Unit1;
    private file READ_DB_INVENTORY_FILE;
    private file LICONIC_INV_FILE;
    private file PARTITION_NAME_LOOKUP_FILE;
    private file UPDATE_DB_INVENTORY_FILE;
    private variable arrLiconicPartitions[];
    private variable shelfInventoryArray[];
    private variable nullCassetteArray[];
    private variable barcodeToRemoveArray[];
    private variable cassetteInventoryArray[];
    private variable nullShelfArray[];
    private variable plateInventoryArray[];
    private variable ppSensorArray[];
    private variable barcodeInventoryArray[];
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************InventoryIncubator_Partial Sub**************************************"));
    Definitions(myDBFileName, myDBTableName, myUnitID, mySTXTitle, mySimState);
    PartitionTime = 120;
    myInventoryFileName = Translate("C:\\LiconicTestSMT.txt");
    if(0){
      myInventoryFileNameCheck = FilSearchPath(myInventoryFileName);
      if (myInventoryFileName == myInventoryFileNameCheck)
      {
        HSLMapReport::DeleteFile(myInventoryFileName);
      }
    }
    CheckLiconicStatus();
    TrcTrace4(mySTXTitle, Translate("Partial inventory of partition "), Partition, Translate(" started"));
    if(0){
      mySQLCommand = StrConcat8(Translate("SELECT DISTINCT [LiconicPartition] FROM ["), myDBTableName, Translate("] WHERE [Partition] = '"), Partition, Translate("'"), Translate(""), Translate(""), Translate(""));
      PARTITION_NAME_LOOKUP_FILE.AddField("LiconicPartition", liconicPartition, hslString, 255);
      if( 0 == PARTITION_NAME_LOOKUP_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
      }
    }
    arrLiconicPartitions.SetSize(0);
    arrLiconicPartitions.AddAsLast(Partition);
    if(0){
      {
        while (
           (PARTITION_NAME_LOOKUP_FILE.Eof() == 0)
        )
        {
          if( 0 == PARTITION_NAME_LOOKUP_FILE.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          arrLiconicPartitions.AddAsLast(liconicPartition);
          TrcTrace(Translate("Liconic Partition to scan:  "), liconicPartition);
        }
      }
      if( 0 != PARTITION_NAME_LOOKUP_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      PARTITION_NAME_LOOKUP_FILE.RemoveFields();
    }
    if (mySimState != 1)
    {
      numOfPartitions=arrLiconicPartitions.GetSize();
      {
        for(partitionCounter = 0; partitionCounter < numOfPartitions;)
        {
          partitionCounter = partitionCounter + 1;
          HSLMapReport::DeleteFile(myInventoryFileName);
          liconicPartition=arrLiconicPartitions.GetAt(partitionCounter-1);
          dialogHandle_65.SetOutput(Translate("Liconic Partition to scan:  "), liconicPartition);
          dialogHandle_65.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          stepReturn = HSLLiconicSTX::COMMAND::PartialInventoryScan(myUnitID, myInventoryFileName, liconicPartition, 1, 1);
          if( 0 == PartialInventoryTimer_Unit1.SetTimer(PartitionTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (stepReturn == HSLLiconicSTX::FALSE)
          {
            dialogHandle_68.SetOutput(Translate("The incubator returned an error!\n\nPlease check logfile for details."));
            dialogHandle_68.ShowOutput(Translate("Incubator Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            abort;
          }
          if( 0 == PartialInventoryTimer_Unit1.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          myInventoryFileNameCheck = FilSearchPath(myInventoryFileName);
          {
            loopCounterFileCheck = 0;
            while (myInventoryFileName != myInventoryFileNameCheck)
            {
              loopCounterFileCheck = loopCounterFileCheck + 1;
              if (loopCounterFileCheck > 200)
              {
                dialogHandle_66.SetOutput(Translate("STX220 Invenoty of "), Partition, Translate(" is not completing.... \n\n\n ABORT and run again......"));
                dialogHandle_66.ShowOutput(Translate("STX220 Invenoty Write File Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                abort;
              }
              else
              {
                if (loopCounterFileCheck > 20)
                {
                  dialogHandle_64.SetOutput(Translate("STX220 Invenoty of "), Partition, Translate(" is not complete.... \n\n\n Delay 20 sec......"));
                  dialogHandle_64.ShowOutput(Translate("STX220 Invenoty Delay "), hslOKOnly | hslInformation | hslDefButton1, 20);
                }
              }
              myInventoryFileNameCheck = FilSearchPath(myInventoryFileName);
            }
          }
          CheckLiconicStatus();
          TrcTrace4(mySTXTitle, Translate("Partial inventory of partition "), Partition, Translate(" complete"));
          TrcTrace(mySTXTitle, Translate("Start update of inventory database"));
          if(0){
            cassetteInventoryArray.SetSize(0);
            shelfInventoryArray.SetSize(0);
            barcodeInventoryArray.SetSize(0);
            plateInventoryArray.SetSize(0);
            LICONIC_INV_FILE.AddField(1, myBarcode, hslString, 255);
            LICONIC_INV_FILE.AddField(4, myPlate, hslInteger);
            LICONIC_INV_FILE.AddField(8, myCassette, hslString, 255);
            LICONIC_INV_FILE.AddField(9, myShelf, hslString, 255);
            LICONIC_INV_FILE.SetDelimiter(hslCSVDelimited);
            if( 0 == LICONIC_INV_FILE.Open(myInventoryFileName, hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myInventoryFileName, "HxMetEdCompCmd");
            }
            {
              while (
                 (LICONIC_INV_FILE.Eof() == 0)
              )
              {
                if( 0 == LICONIC_INV_FILE.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                barcodeInventoryArray.AddAsLast(myBarcode);
                cassetteInventoryArray.AddAsLast(myCassette);
                cassetteInventoryArray.AddAsLast(myCassette);
                shelfInventoryArray.AddAsLast(myShelf);
                nullCassetteArray.SetSize(0);
                plateInventoryArray.AddAsLast(myPlate);
                nullShelfArray.SetSize(0);
                myPlatesTotal = myPlatesTotal + myPlate;
                onerror goto errLabel_69 ;
                err.Clear();
                if (myBarcode != "")
                {
                  nullBarcode = 0;
                }
                else
                {
                  nullBarcode = 1;
                }
                errLabel_69 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  nullBarcode = 1;
                }   /* end if from skip handler if no error */
                if (nullBarcode == 0)
                {
                  mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
                  READ_DB_INVENTORY_FILE.AddField("Cassette", cassette, hslString, 255);
                  READ_DB_INVENTORY_FILE.AddField("Shelf", shelf, hslString, 255);
                  if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                  }
                  onerror goto errLabel_70 ;
                  err.Clear();
                  if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != READ_DB_INVENTORY_FILE.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  READ_DB_INVENTORY_FILE.RemoveFields();
                  errLabel_70 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    if( 0 != READ_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    READ_DB_INVENTORY_FILE.RemoveFields();
                    mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = '"), myBarcode, Translate("' , [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
                    if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                    }
                    if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    UPDATE_DB_INVENTORY_FILE.RemoveFields();
                    newEntry = newEntry + 1;
                  }   /* end if from skip handler if no error */
                }
                else
                {
                  nullCassetteArray.AddAsLast(myCassette);
                  nullShelfArray.AddAsLast(myShelf);
                }
              }
            }
            if( 0 != LICONIC_INV_FILE.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            LICONIC_INV_FILE.RemoveFields();
            myArraySize=nullCassetteArray.GetSize();
            barcodeToRemoveArray.SetSize(0);
            {
              for(myArrayIndex = 0; myArrayIndex < myArraySize;)
              {
                myArrayIndex = myArrayIndex + 1;
                myCassette=nullCassetteArray.GetAt(myArrayIndex-1);
                myShelf=nullShelfArray.GetAt(myArrayIndex-1);
                mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""));
                READ_DB_INVENTORY_FILE.AddField("Cassette", myCassette, hslString, 255);
                READ_DB_INVENTORY_FILE.AddField("Shelf", myShelf, hslString, 255);
                READ_DB_INVENTORY_FILE.AddField("Barcode", myBarcode, hslString, 255);
                READ_DB_INVENTORY_FILE.AddField("Status", myStatus, hslString, 255);
                if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                }
                if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 != READ_DB_INVENTORY_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                READ_DB_INVENTORY_FILE.RemoveFields();
                onerror goto errLabel_71 ;
                err.Clear();
                if (myStatus != "STAR_DECK")
                {
                  barcodeToRemoveArray.AddAsLast(myBarcode);
                }
                if (myBarcode != "")
                {
                }
                errLabel_71 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  TrcTrace(Translate("Error handled by system"), Translate(""));
                }   /* end if from skip handler if no error */
              }
            }
            myArraySize=barcodeToRemoveArray.GetSize();
            {
              for(myArrayIndex = 0; myArrayIndex < myArraySize;)
              {
                myArrayIndex = myArrayIndex + 1;
                myBarcode=barcodeToRemoveArray.GetAt(arrayIndex-1);
                mySQLCommand = StrConcat8(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL , [Status] = NULL WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
                if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                }
                if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                UPDATE_DB_INVENTORY_FILE.RemoveFields();
              }
            }
          }
          cassetteInventoryArray.SetSize(0);
          shelfInventoryArray.SetSize(0);
          ppSensorArray.SetSize(0);
          barcodeInventoryArray.SetSize(0);
          LICONIC_INV_FILE.AddField(1, myBarcode, hslString, 255);
          LICONIC_INV_FILE.AddField(4, myPPSensor, hslInteger);
          LICONIC_INV_FILE.AddField(8, myCassette, hslString, 255);
          LICONIC_INV_FILE.AddField(9, myShelf, hslString, 255);
          LICONIC_INV_FILE.SetDelimiter(hslCSVDelimited);
          if( 0 == LICONIC_INV_FILE.Open(myInventoryFileName, hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myInventoryFileName, "HxMetEdCompCmd");
          }
          {
            while (
               (LICONIC_INV_FILE.Eof() == 0)
            )
            {
              if( 0 == LICONIC_INV_FILE.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              barcodeInventoryArray.AddAsLast(myBarcode);
              ppSensorArray.AddAsLast(myPPSensor);
              cassetteInventoryArray.AddAsLast(myCassette);
              shelfInventoryArray.AddAsLast(myShelf);
              if (myPPSensor == 1)
              {
                onerror goto errLabel_72 ;
                err.Clear();
                if (myBarcode != "<null>")
                {
                  nullBarcode = 0;
                }
                else
                {
                  nullBarcode = 1;
                }
                errLabel_72 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  nullBarcode = 1;
                }   /* end if from skip handler if no error */
                if (nullBarcode == 0)
                {
                  mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
                  READ_DB_INVENTORY_FILE.AddField("Cassette", cassette, hslString, 255);
                  READ_DB_INVENTORY_FILE.AddField("Shelf", shelf, hslString, 255);
                  if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                  }
                  onerror goto errLabel_73 ;
                  err.Clear();
                  if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != READ_DB_INVENTORY_FILE.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  READ_DB_INVENTORY_FILE.RemoveFields();
                  errLabel_73 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    if( 0 != READ_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    READ_DB_INVENTORY_FILE.RemoveFields();
                    mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = '"), myBarcode, Translate("', [PlatePresent] = "), myPPSensor, Translate(", [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""));
                    if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                    }
                    if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    UPDATE_DB_INVENTORY_FILE.RemoveFields();
                  }   /* end if from skip handler if no error */
                }
                else
                {
                  mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL, [PlatePresent] = "), myPPSensor, Translate(", [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
                  if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                  }
                  if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  UPDATE_DB_INVENTORY_FILE.RemoveFields();
                }
              }
              else
              {
                mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL, [PlatePresent] = "), myPPSensor, Translate(", [Status] = 'INCUBATOR' WHERE [Cassette] = '"), myCassette, Translate("' AND [Shelf] = '"), myShelf, Translate("'"), Translate(""), Translate(""), Translate(""));
                if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
                }
                if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                UPDATE_DB_INVENTORY_FILE.RemoveFields();
              }
            }
          }
          if( 0 != LICONIC_INV_FILE.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          LICONIC_INV_FILE.RemoveFields();
          if(0){
            mySQLCommand = StrConcat4(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE BARCODE IS NOT NULL"), Translate(""));
          }
          mySQLCommand = StrConcat8(Translate("SELECT * FROM ["), myDBTableName, Translate("] WHERE [Barcode] IS NOT NULL AND [LiconicPartition] = '"), liconicPartition, Translate("'"), Translate(""), Translate(""), Translate(""));
          READ_DB_INVENTORY_FILE.AddField("Cassette", myCassette, hslString, 255);
          READ_DB_INVENTORY_FILE.AddField("Shelf", myShelf, hslString, 255);
          READ_DB_INVENTORY_FILE.AddField("Barcode", myBarcode, hslString, 255);
          READ_DB_INVENTORY_FILE.AddField("Status", myStatus, hslString, 255);
          if( 0 == READ_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslRead, mySQLCommand) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
          }
          barcodeToRemoveArray.SetSize(0);
          {
            while (
               (READ_DB_INVENTORY_FILE.Eof() == 0)
            )
            {
              if( 0 == READ_DB_INVENTORY_FILE.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              retValue = Util::Lookup(barcodeInventoryArray, myBarcode, myZeroBasedIndex);
              if (retValue == 0)
              {
                if (myStatus != "STAR_DECK")
                {
                  barcodeToRemoveArray.AddAsLast(myBarcode);
                }
              }
            }
          }
          if( 0 != READ_DB_INVENTORY_FILE.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          READ_DB_INVENTORY_FILE.RemoveFields();
          myArraySize=barcodeToRemoveArray.GetSize();
          {
            for(arrayIndex = 0; arrayIndex < myArraySize;)
            {
              arrayIndex = arrayIndex + 1;
              myBarcode=barcodeToRemoveArray.GetAt(arrayIndex-1);
              mySQLCommand = StrConcat8(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = NULL , [Status] = NULL, [PlatePresent] = 0 WHERE [Barcode] = '"), myBarcode, Translate("'"), Translate(""), Translate(""), Translate(""));
              if( 0 == UPDATE_DB_INVENTORY_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
              }
              if( 0 != UPDATE_DB_INVENTORY_FILE.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              UPDATE_DB_INVENTORY_FILE.RemoveFields();
            }
          }
        }
      }
    }
    if(0){
      if (myPlatesTotal != newEntry)
      {
        dialogHandle_67.SetOutput(Translate("There was a Plate Scan Discrepancy!"), Translate("\n   There where:\n\n     "), newEntry, Translate("   Barcodes Read \n\n     AND\n\n     "), myPlatesTotal, Translate("   Plates Flagged"));
        dialogHandle_67.ShowOutput(mySTXTitle, hslOKOnly | hslInformation | hslDefButton1, 5);
      }
    }
    TrcTrace(mySTXTitle, Translate("Update of inventory database complete"));
    return (newEntry);
  }

  function UpdateDatabaseFromArrays( variable iStackNumber, variable iPositionInStack, variable iBarcode, variable iPlateOccupancy ) void {
    private dialog dialogHandle_74;
    private dialog dialogHandle_75;
    private dialog dialogHandle_76;
    private dialog dialogHandle_77;
    private dialog dialogHandle_78;
    private dialog dialogHandle_79;
    private dialog dialogHandle_80;
    private variable retVal;
    private variable myCassette;
    private variable tmpBarcode;
    private variable dlgReturn;
    private variable mySTXTitle;
    private variable myDBFileName;
    private variable loopCounter1;
    private variable myShelf;
    private variable stepReturn;
    private variable myUnitID;
    private variable level;
    private variable fileReadCounter;
    private variable mySimState;
    private variable myDBTableName;
    private variable mySQLCommand;
    private variable slot;
    private variable retval;
    private file DB_UPDATE_FILE;
    private file DB_LOOKUP_FILE;
    MECC::TraceComment(Translate("**********************************STX MANAGER SMT**************************************\n**********************************UpdateDatabaseFromArrays Sub**************************************"));
    Definitions(myDBFileName, myDBTableName, myUnitID, mySTXTitle, mySimState);
    if (mySimState != 1)
    {
      mySQLCommand = StrConcat12(Translate("UPDATE ["), myDBTableName, Translate("] SET [Barcode] = '"), iBarcode, Translate("', [PlatePresent] = '"), iPlateOccupancy, Translate("', [Status] = 'INCUBATOR' WHERE [Cassette] = '"), iStackNumber, Translate("' AND [Shelf] = '"), iPositionInStack, Translate("'"), Translate(""));
      if( 0 == DB_UPDATE_FILE.Open(myDBFileName + " " + myDBTableName, hslAppend, mySQLCommand) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, myDBFileName, "HxMetEdCompCmd");
      }
      if( 0 != DB_UPDATE_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      DB_UPDATE_FILE.RemoveFields();
      TrcTrace12(mySTXTitle, Translate("Plate "), iBarcode, Translate(", occupancy "), iPlateOccupancy, Translate(", stored in cassette "), iStackNumber, Translate(", shelf "), iPositionInStack, Translate(" succesfully"), Translate(""), Translate(""));
    }
  }
} // library namespace
