#pragma once
#include "HSLSeqLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "Training\\HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace SEQUENCESORTERS {
  function Sort_PairedSequences( device & ML_STAR, sequence & ioSequenceToSort, sequence & ioSeqPairedSequence ) void ;
  function Sort_PairedSequences_WithVolumeArray( device & ML_STAR, sequence & ioSequenceToSort, sequence & ioSeqPairedSequence, variable & ioArrayOfVolumes[] ) void ;
  function Sort_Sequence( device & ML_STAR, sequence & ioSequenceToSort ) void ;
  function Sort_Sequence_WithVolumeArray( device & ML_STAR, sequence & ioSequenceToSort, variable & ioArrayOfVolumes[] ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Sort_Sequence( device & ML_STAR, sequence & ioSequenceToSort ) void {
    private variable total_positions;
    private variable sql_statement;
    private variable seq_sort_file;
    private file seq_sort;
    private variable fileWriteIndex;
    private variable sortSeq_angle;
    private variable sortSeq_pos_id;
    private variable sortSeq_x_coord;
    private variable sortSeq_z_coord;
    private variable sortSeq_y_coord;
    private variable fileReadIndex;
    private variable sortSeq_lab_id;
    private variable sheetName;
    seq_sort_file = "C:\\Program Files (x86)\\Hamilton\\System\\SequenceSortingFile.xls";
    sheetName = Translate("SingleSequence");
    seq_sort.AddField("sortSeq_lab_id", sortSeq_lab_id, hslString, 255);
    seq_sort.AddField("sortSeq_pos_id", sortSeq_pos_id, hslString, 255);
    seq_sort.AddField("sortSeq_x_coord", sortSeq_x_coord, hslFloat);
    seq_sort.AddField("sortSeq_y_coord", sortSeq_y_coord, hslFloat);
    seq_sort.AddField("sortSeq_z_coord", sortSeq_z_coord, hslFloat);
    seq_sort.AddField("sortSeq_angle", sortSeq_angle, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + sheetName, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    ioSequenceToSort.SetCurrentPosition(1);
    total_positions = SeqGetTotal(ioSequenceToSort);
    {
      for(fileWriteIndex = 0; fileWriteIndex < total_positions;)
      {
        fileWriteIndex = fileWriteIndex + 1;
        ioSequenceToSort.SetCurrentPosition(fileWriteIndex);
        sortSeq_lab_id = SeqGetLabwareId(ioSequenceToSort);
        sortSeq_pos_id = SeqGetPositionId(ioSequenceToSort);
        DevGetLabwarePositionEx(ML_STAR, sortSeq_lab_id, sortSeq_pos_id, sortSeq_x_coord, sortSeq_y_coord, sortSeq_z_coord, sortSeq_angle);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = StrConcat4(Translate("SELECT * FROM ["), sheetName, Translate("] ORDER BY [sortSeq_x_coord] ASC, [sortSeq_y_coord] DESC"), Translate(""));
    seq_sort.AddField("sortSeq_lab_id", sortSeq_lab_id, hslString, 255);
    seq_sort.AddField("sortSeq_pos_id", sortSeq_pos_id, hslString, 255);
    seq_sort.AddField("sortSeq_x_coord", sortSeq_x_coord, hslFloat);
    seq_sort.AddField("sortSeq_y_coord", sortSeq_y_coord, hslFloat);
    seq_sort.AddField("sortSeq_z_coord", sortSeq_z_coord, hslFloat);
    seq_sort.AddField("sortSeq_angle", sortSeq_angle, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + sheetName, hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    // Aspirationssequenz nach sortiertem File erzeugen
    SeqRemoveAll(ioSequenceToSort);
    {
      fileReadIndex = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        fileReadIndex = fileReadIndex + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeError(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqAdd(ioSequenceToSort, sortSeq_lab_id, sortSeq_pos_id);
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    ioSequenceToSort.SetCurrentPosition(1);
  }

  function Sort_PairedSequences_WithVolumeArray( device & ML_STAR, sequence & ioSequenceToSort, sequence & ioSeqPairedSequence, variable & ioArrayOfVolumes[] ) void {
    private variable fileWriteIndex;
    private variable total_positions;
    private variable sql_statement;
    private variable volume;
    private variable fileReadIndex;
    private variable seq_sort_file;
    private file seq_sort;
    private variable sortSeq_angle;
    private variable pairedSeq_pos_id;
    private variable sortSeq_pos_id;
    private variable sortSeq_x_coord;
    private variable sortSeq_z_coord;
    private variable sortSeq_y_coord;
    private variable pairedSeq_lab_id;
    private variable sortSeq_lab_id;
    private variable sheetName;
    seq_sort_file = "C:\\Program Files (x86)\\Hamilton\\System\\SequenceSortingFile.xls";
    sheetName = Translate("PairedSequencesWithArray");
    seq_sort.AddField("sortSeq_lab_id", sortSeq_lab_id, hslString, 255);
    seq_sort.AddField("sortSeq_pos_id", sortSeq_pos_id, hslString, 255);
    seq_sort.AddField("sortSeq_x_coord", sortSeq_x_coord, hslFloat);
    seq_sort.AddField("sortSeq_y_coord", sortSeq_y_coord, hslFloat);
    seq_sort.AddField("sortSeq_z_coord", sortSeq_z_coord, hslFloat);
    seq_sort.AddField("sortSeq_angle", sortSeq_angle, hslFloat);
    seq_sort.AddField("pairedSeq_lab_id", pairedSeq_lab_id, hslString, 255);
    seq_sort.AddField("pairedSeq_pos_id", pairedSeq_pos_id, hslString, 255);
    seq_sort.AddField("volume", volume, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + sheetName, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    ioSequenceToSort.SetCurrentPosition(1);
    ioSeqPairedSequence.SetCurrentPosition(1);
    total_positions = SeqGetTotal(ioSequenceToSort);
    {
      for(fileWriteIndex = 0; fileWriteIndex < total_positions;)
      {
        fileWriteIndex = fileWriteIndex + 1;
        ioSequenceToSort.SetCurrentPosition(fileWriteIndex);
        ioSeqPairedSequence.SetCurrentPosition(fileWriteIndex);
        sortSeq_lab_id = SeqGetLabwareId(ioSequenceToSort);
        sortSeq_pos_id = SeqGetPositionId(ioSequenceToSort);
        DevGetLabwarePositionEx(ML_STAR, sortSeq_lab_id, sortSeq_pos_id, sortSeq_x_coord, sortSeq_y_coord, sortSeq_z_coord, sortSeq_angle);
        pairedSeq_lab_id = SeqGetLabwareId(ioSeqPairedSequence);
        pairedSeq_pos_id = SeqGetPositionId(ioSeqPairedSequence);
        volume=ioArrayOfVolumes.GetAt(fileWriteIndex-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = StrConcat4(Translate("SELECT * FROM ["), sheetName, Translate("] ORDER BY [sortSeq_x_coord] ASC, [sortSeq_y_coord] DESC"), Translate(""));
    seq_sort.AddField("sortSeq_lab_id", sortSeq_lab_id, hslString, 255);
    seq_sort.AddField("sortSeq_pos_id", sortSeq_pos_id, hslString, 255);
    seq_sort.AddField("sortSeq_x_coord", sortSeq_x_coord, hslFloat);
    seq_sort.AddField("sortSeq_y_coord", sortSeq_y_coord, hslFloat);
    seq_sort.AddField("sortSeq_z_coord", sortSeq_z_coord, hslFloat);
    seq_sort.AddField("sortSeq_angle", sortSeq_angle, hslFloat);
    seq_sort.AddField("pairedSeq_lab_id", pairedSeq_lab_id, hslString, 255);
    seq_sort.AddField("pairedSeq_pos_id", pairedSeq_pos_id, hslString, 255);
    seq_sort.AddField("volume", volume, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + sheetName, hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    // Aspirationssequenz nach sortiertem File erzeugen
    SeqRemoveAll(ioSequenceToSort);
    SeqRemoveAll(ioSeqPairedSequence);
    {
      fileReadIndex = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        fileReadIndex = fileReadIndex + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeError(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqAdd(ioSequenceToSort, sortSeq_lab_id, sortSeq_pos_id);
        SeqAdd(ioSeqPairedSequence, pairedSeq_lab_id, pairedSeq_pos_id);
        ioArrayOfVolumes.SetAt(fileReadIndex-1, volume);
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    ioSequenceToSort.SetCurrentPosition(1);
    ioSeqPairedSequence.SetCurrentPosition(1);
  }

  function Sort_Sequence_WithVolumeArray( device & ML_STAR, sequence & ioSequenceToSort, variable & ioArrayOfVolumes[] ) void {
    private variable seq_sort_file;
    private variable fileWriteIndex;
    private variable sortSeq_angle;
    private variable total_positions;
    private variable sql_statement;
    private variable sortSeq_pos_id;
    private variable sortSeq_x_coord;
    private variable sortSeq_z_coord;
    private variable sortSeq_y_coord;
    private variable volume;
    private variable fileReadIndex;
    private variable sortSeq_lab_id;
    private file seq_sort;
    private variable sheetName;
    seq_sort_file = "C:\\Program Files (x86)\\Hamilton\\System\\SequenceSortingFile.xls";
    sheetName = Translate("SingleSequenceWithArray");
    seq_sort.AddField("sortSeq_lab_id", sortSeq_lab_id, hslString, 255);
    seq_sort.AddField("sortSeq_pos_id", sortSeq_pos_id, hslString, 255);
    seq_sort.AddField("sortSeq_x_coord", sortSeq_x_coord, hslFloat);
    seq_sort.AddField("sortSeq_y_coord", sortSeq_y_coord, hslFloat);
    seq_sort.AddField("sortSeq_z_coord", sortSeq_z_coord, hslFloat);
    seq_sort.AddField("sortSeq_angle", sortSeq_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + sheetName, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    ioSequenceToSort.SetCurrentPosition(1);
    total_positions = SeqGetTotal(ioSequenceToSort);
    {
      for(fileWriteIndex = 0; fileWriteIndex < total_positions;)
      {
        fileWriteIndex = fileWriteIndex + 1;
        ioSequenceToSort.SetCurrentPosition(fileWriteIndex);
        sortSeq_lab_id = SeqGetLabwareId(ioSequenceToSort);
        sortSeq_pos_id = SeqGetPositionId(ioSequenceToSort);
        DevGetLabwarePositionEx(ML_STAR, sortSeq_lab_id, sortSeq_pos_id, sortSeq_x_coord, sortSeq_y_coord, sortSeq_z_coord, sortSeq_angle);
        volume=ioArrayOfVolumes.GetAt(fileWriteIndex-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = StrConcat4(Translate("SELECT * FROM ["), sheetName, Translate("] ORDER BY [sortSeq_x_coord] ASC, [sortSeq_y_coord] DESC"), Translate(""));
    seq_sort.AddField("sortSeq_lab_id", sortSeq_lab_id, hslString, 255);
    seq_sort.AddField("sortSeq_pos_id", sortSeq_pos_id, hslString, 255);
    seq_sort.AddField("sortSeq_x_coord", sortSeq_x_coord, hslFloat);
    seq_sort.AddField("sortSeq_y_coord", sortSeq_y_coord, hslFloat);
    seq_sort.AddField("sortSeq_z_coord", sortSeq_z_coord, hslFloat);
    seq_sort.AddField("sortSeq_angle", sortSeq_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + sheetName, hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    // Aspirationssequenz nach sortiertem File erzeugen
    SeqRemoveAll(ioSequenceToSort);
    {
      fileReadIndex = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        fileReadIndex = fileReadIndex + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeError(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqAdd(ioSequenceToSort, sortSeq_lab_id, sortSeq_pos_id);
        ioArrayOfVolumes.SetAt(fileReadIndex-1, volume);
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    ioSequenceToSort.SetCurrentPosition(1);
  }

  function Sort_PairedSequences( device & ML_STAR, sequence & ioSequenceToSort, sequence & ioSeqPairedSequence ) void {
    private variable fileWriteIndex;
    private variable total_positions;
    private variable sortSeq_angle;
    private variable sql_statement;
    private variable pairedSeq_pos_id;
    private variable sortSeq_pos_id;
    private variable sortSeq_x_coord;
    private variable volume;
    private variable sortSeq_z_coord;
    private variable sortSeq_y_coord;
    private variable pairedSeq_lab_id;
    private variable seq_sort_file;
    private variable fileReadIndex;
    private variable sortSeq_lab_id;
    private file seq_sort;
    private variable sheetName;
    seq_sort_file = "C:\\Program Files (x86)\\Hamilton\\System\\SequenceSortingFile.xls";
    sheetName = Translate("PairedSequences");
    seq_sort.AddField("sortSeq_lab_id", sortSeq_lab_id, hslString, 255);
    seq_sort.AddField("sortSeq_pos_id", sortSeq_pos_id, hslString, 255);
    seq_sort.AddField("sortSeq_x_coord", sortSeq_x_coord, hslFloat);
    seq_sort.AddField("sortSeq_y_coord", sortSeq_y_coord, hslFloat);
    seq_sort.AddField("sortSeq_z_coord", sortSeq_z_coord, hslFloat);
    seq_sort.AddField("sortSeq_angle", sortSeq_angle, hslFloat);
    seq_sort.AddField("pairedSeq_lab_id", pairedSeq_lab_id, hslString, 255);
    seq_sort.AddField("pairedSeq_pos_id", pairedSeq_pos_id, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + sheetName, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    ioSequenceToSort.SetCurrentPosition(1);
    ioSeqPairedSequence.SetCurrentPosition(1);
    total_positions = SeqGetTotal(ioSequenceToSort);
    {
      for(fileWriteIndex = 0; fileWriteIndex < total_positions;)
      {
        fileWriteIndex = fileWriteIndex + 1;
        ioSequenceToSort.SetCurrentPosition(fileWriteIndex);
        ioSeqPairedSequence.SetCurrentPosition(fileWriteIndex);
        sortSeq_lab_id = SeqGetLabwareId(ioSequenceToSort);
        sortSeq_pos_id = SeqGetPositionId(ioSequenceToSort);
        DevGetLabwarePositionEx(ML_STAR, sortSeq_lab_id, sortSeq_pos_id, sortSeq_x_coord, sortSeq_y_coord, sortSeq_z_coord, sortSeq_angle);
        pairedSeq_lab_id = SeqGetLabwareId(ioSeqPairedSequence);
        pairedSeq_pos_id = SeqGetPositionId(ioSeqPairedSequence);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = StrConcat4(Translate("SELECT * FROM ["), sheetName, Translate("] ORDER BY [sortSeq_x_coord] ASC, [sortSeq_y_coord] DESC"), Translate(""));
    seq_sort.AddField("sortSeq_lab_id", sortSeq_lab_id, hslString, 255);
    seq_sort.AddField("sortSeq_pos_id", sortSeq_pos_id, hslString, 255);
    seq_sort.AddField("sortSeq_x_coord", sortSeq_x_coord, hslFloat);
    seq_sort.AddField("sortSeq_y_coord", sortSeq_y_coord, hslFloat);
    seq_sort.AddField("sortSeq_z_coord", sortSeq_z_coord, hslFloat);
    seq_sort.AddField("sortSeq_angle", sortSeq_angle, hslFloat);
    seq_sort.AddField("pairedSeq_lab_id", pairedSeq_lab_id, hslString, 255);
    seq_sort.AddField("pairedSeq_pos_id", pairedSeq_pos_id, hslString, 255);
    seq_sort.AddField("volume", volume, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + sheetName, hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    // Aspirationssequenz nach sortiertem File erzeugen
    SeqRemoveAll(ioSequenceToSort);
    SeqRemoveAll(ioSeqPairedSequence);
    {
      fileReadIndex = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        fileReadIndex = fileReadIndex + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeError(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqAdd(ioSequenceToSort, sortSeq_lab_id, sortSeq_pos_id);
        SeqAdd(ioSeqPairedSequence, pairedSeq_lab_id, pairedSeq_pos_id);
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    ioSequenceToSort.SetCurrentPosition(1);
    ioSeqPairedSequence.SetCurrentPosition(1);
  }
} // library namespace
