#pragma once
#include "HSLFilLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLStrLib.hsl"
#include "Training\\HSLTrcLib.hsl"
#include "SynenTec Cellavista\\SynenTec Cellavista.hsl"
#include "ASWStandard\\AppConfigInterface\\AppConfigInterfaceBase.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLChoiceDialog.hsl"
#include "HSLArrLib.hsl"
#include "HSLMicrosoftExcel.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLUtilLib2.hsl"
#include "SMTs\\MedImmune\\MedImmune_General\\MedImmune_General.hs_"
#include "SMTs\\MedImmune\\MedImmune_SampleTrackingDBHelper SQLDB_2014.hs_"
#include "HSLMETEDLib.hs_"
#include "Training\\HSLMECCLib.hs_"

namespace SYNENTEC_CELLAVISTA_NYONE_V1 {
  function Cellavista_FACS_Image_Transfer( variable worklistFile, variable computerchoice, variable folderchoice ) void ;
  function Cellavista_Suspension_Heatmap( variable varDisplayType, variable varChoiceSetup, variable experimentID, variable cellavistaExperiment, variable DWPsThisTime, variable date, variable time, variable targetCellDensity, variable targetCellDensityTerm, variable mediaType, variable mediaLot, variable mediaType2, variable mediaLot2, variable targetVolume, variable barcodeReadPlate, variable & arrBaracodesSetUpPlates[], variable & arrBaracodesPassagePlates[], variable & arrBaracodesTerminalPlates[] ) void ;
  function Get_Cellavista_Results_Confluence( variable csvFileName, variable plateType, variable & arr_WellID[], variable & arr_ConfVal[], variable & arrColumn[], variable & arrRowAlpha[] ) void ;
  function Get_Cellavista_Results_FL_LiveDead( variable csvFileName, variable plateType, variable & arr_WellID[], variable & arr_TCD[], variable & arr_VCD[], variable & arr_Via[], variable DilutionFactor, variable CellavistaVolume ) void ;
  function Get_Cellavista_Results_Trypan( variable csvFileName, variable plateType, variable & arr_WellID[], variable & arr_TCD[], variable & arr_VCD[], variable & arr_Via[], variable DilutionFactor, variable CellavistaVolume ) void ;
  private function TranslateRowCoordinate( variable iRowNumber, variable & oRowAlpha ) void ;
  function _InitLibrary() {
    MEDIMMUNE_GENERAL::_InitLibrary();
    MEDIMMUNE_SAMPLETRACKINGDBHELPER_SQLDB_2014::_InitLibrary();
  }
  function _ExitLibrary() {
    MEDIMMUNE_GENERAL::_ExitLibrary();
    MEDIMMUNE_SAMPLETRACKINGDBHELPER_SQLDB_2014::_ExitLibrary();
  }

  function Get_Cellavista_Results_Confluence( variable csvFileName, variable plateType, variable & arr_WellID[], variable & arr_ConfVal[], variable & arrColumn[], variable & arrRowAlpha[] ) void {
    private variable Row;
    private variable WellID;
    private variable Col;
    private variable Confluence;
    private variable csvReadLoopCounter;
    private file READ_RESULTS_CSV;
    private variable confluenceFloatVal;
    private variable str_ShellCommand;
    private variable int_ExportLocation;
    private variable int_FileLocation;
    private variable str_NewFile;
    private variable str_FileName;
    private timer CSVTimer;
    private variable csvloop;
    private variable csvloopcounter;
    private variable varCheckDrive;
    arr_WellID.SetSize( 0);
    arr_ConfVal.SetSize( 0);
    arrColumn.SetSize( 0);
    arrRowAlpha.SetSize( 0);
    csvloop = 1;
    {
      csvloopcounter = 0;
      while (csvloop == 1)
      {
        csvloopcounter = csvloopcounter + 1;
        varCheckDrive = FilSearchPath(csvFileName);
        if (varCheckDrive == "")
        {
          if (csvloopcounter == 11)
          {
            Trace ("File Copy Error : Breaking Loop");
            break;
          }
          csvloop = 1;
          Trace ("File Copy Error Attempt " +csvloopcounter+ " : Retry in 30 Seconds");
          if( 0 == CSVTimer.SetTimer(30) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == CSVTimer.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          csvloop = 0;
          int_ExportLocation = StrFind(csvFileName, Translate("Export"));
          Trace (int_ExportLocation);
          int_FileLocation = int_ExportLocation + 7;
          str_FileName = StrMid(csvFileName, int_FileLocation, 150);
          Trace (str_FileName);
          str_NewFile = StrConcat4(Translate("C:\\Program Files (x86)\HAMILTON\\System\MedImmune System Files\\TempCSV\\"), str_FileName, Translate(""), Translate(""));
          Trace (str_NewFile);
          str_ShellCommand = StrConcat8(Translate("C:\\Program Files (x86)\\HAMILTON\\System\MedImmune System Files\\CellavistaCopyCSV.cmd \""), csvFileName, Translate("\" \""), str_NewFile, Translate("\""), Translate(""), Translate(""), Translate(""));
          Trace (str_ShellCommand);
          Trace ("Copying CSV results file from Cellavista to Hamilton PC");
          {
            if( 0 == Shell(str_ShellCommand, hslShow, hslSynchronous) )
            {
                  MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          if( 0 == CSVTimer.SetTimer(30) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == CSVTimer.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          csvFileName = str_NewFile;
        }
      }
    }
    arr_WellID.SetSize(0);
    arr_ConfVal.SetSize(0);
    arrRowAlpha.SetSize(0);
    arrColumn.SetSize(0);
    READ_RESULTS_CSV.SetExtendedProperties( "HDR=NO");
    READ_RESULTS_CSV.AddField(1, Row, hslString, 255);
    READ_RESULTS_CSV.AddField(2, Col, hslString, 255);
    READ_RESULTS_CSV.AddField(3, Confluence, hslFloat);
    READ_RESULTS_CSV.SetDelimiter(hslCSVDelimited);
    if( 0 == READ_RESULTS_CSV.Open(csvFileName, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, csvFileName, "HxMetEdCompCmd");
    }
    {
      csvReadLoopCounter = 0;
      while (
         (READ_RESULTS_CSV.Eof() == 0)
      )
      {
        csvReadLoopCounter = csvReadLoopCounter + 1;
        if( 0 == READ_RESULTS_CSV.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (csvReadLoopCounter > 2)
        {
          onerror goto errLabel_1 ;
          err.Clear();
          WellID = StrConcat2(Row, Col);
          errLabel_1 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            break;
          }   /* end if from skip handler if no error */
          confluenceFloatVal = Confluence;
          if(0){
            confluenceFloatVal = StrFVal(Confluence);
          }
          onerror goto errLabel_2 ;
          err.Clear();
          if (confluenceFloatVal > 0.0)
          {
          }
          errLabel_2 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            confluenceFloatVal = 0.0;
          }   /* end if from skip handler if no error */
          arrColumn.AddAsLast(Col);
          arrRowAlpha.AddAsLast(Row);
          arr_WellID.AddAsLast(WellID);
          arr_ConfVal.AddAsLast(confluenceFloatVal);
          TrcTrace(Translate("Well - "), WellID);
          TrcTrace(Translate("Confluence - "), confluenceFloatVal);
        }
      }
    }
    if( 0 != READ_RESULTS_CSV.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    READ_RESULTS_CSV.RemoveFields();
    str_ShellCommand = StrConcat8(Translate("C:\\Program Files (x86)\\HAMILTON\\System\MedImmune System Files\\CellavistaDeleteCSV.cmd \""), csvFileName, Translate("\""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace (str_ShellCommand);
    Trace ("Deleting results CSV file from Hamilton PC");
    {
      if( 0 == Shell(str_ShellCommand, hslShow, hslSynchronous) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }

  function Get_Cellavista_Results_Trypan( variable csvFileName, variable plateType, variable & arr_WellID[], variable & arr_TCD[], variable & arr_VCD[], variable & arr_Via[], variable DilutionFactor, variable CellavistaVolume ) void {
    private variable TCD;
    private variable VCD;
    private variable Row;
    private variable Viability;
    private variable WellID;
    private variable Col;
    private variable csvReadLoopCounter;
    private file READ_RESULTS_CSV;
    private variable TCN;
    private variable VCN;
    arr_WellID.SetSize( 0);
    arr_TCD.SetSize( 0);
    arr_VCD.SetSize( 0);
    arr_Via.SetSize( 0);
    arr_WellID.SetSize(0);
    arr_TCD.SetSize(0);
    arr_VCD.SetSize(0);
    arr_Via.SetSize(0);
    READ_RESULTS_CSV.SetExtendedProperties( "HDR=NO");
    READ_RESULTS_CSV.AddField(1, Row, hslString, 255);
    READ_RESULTS_CSV.AddField(2, Col, hslString, 255);
    READ_RESULTS_CSV.AddField(3, VCN, hslFloat);
    READ_RESULTS_CSV.AddField(4, TCN, hslFloat);
    READ_RESULTS_CSV.AddField(5, Viability, hslFloat);
    READ_RESULTS_CSV.SetDelimiter(hslCSVDelimited);
    if( 0 == READ_RESULTS_CSV.Open(csvFileName, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, csvFileName, "HxMetEdCompCmd");
    }
    {
      csvReadLoopCounter = 0;
      while (
         (READ_RESULTS_CSV.Eof() == 0)
      )
      {
        csvReadLoopCounter = csvReadLoopCounter + 1;
        if( 0 == READ_RESULTS_CSV.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (csvReadLoopCounter > 2)
        {
          onerror goto errLabel_3 ;
          err.Clear();
          WellID = StrConcat2(Row, Col);
          errLabel_3 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            break;
          }   /* end if from skip handler if no error */
          TCD = (TCN / CellavistaVolume) * 1000 * DilutionFactor;
          VCD = (VCN / CellavistaVolume) * 1000 * DilutionFactor;
          arr_WellID.AddAsLast(WellID);
          arr_TCD.AddAsLast(TCD);
          arr_VCD.AddAsLast(VCD);
          arr_Via.AddAsLast(Viability);
          if(0){
            TrcTrace(Translate("Well - "), WellID);
            TrcTrace(Translate("TCD - "), TCD);
            TrcTrace(Translate("VCD - "), VCD);
            TrcTrace(Translate("Viability - "), Viability);
          }
        }
      }
    }
    if( 0 != READ_RESULTS_CSV.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    READ_RESULTS_CSV.RemoveFields();
  }

  function Cellavista_Suspension_Heatmap( variable varDisplayType, variable varChoiceSetup, variable experimentID, variable cellavistaExperiment, variable DWPsThisTime, variable date, variable time, variable targetCellDensity, variable targetCellDensityTerm, variable mediaType, variable mediaLot, variable mediaType2, variable mediaLot2, variable targetVolume, variable barcodeReadPlate, variable & arrBaracodesSetUpPlates[], variable & arrBaracodesPassagePlates[], variable & arrBaracodesTerminalPlates[] ) void {
    private variable PassPlateBarcode;
    private variable PlateNumber;
    private variable PlateBarcode;
    private variable sqlStatement;
    private variable row;
    private variable iViability;
    private variable PlateColID;
    private variable varCellavistaFileName2;
    private variable testPlatePosID;
    private variable loopCounter1;
    private variable PlatePosID;
    private variable testPlateBarcode;
    private variable TermPlateBarcode;
    private variable iTCD;
    private variable SpreadsheetName;
    private variable loopCounter5;
    private variable iVCD;
    private variable rowAlpha;
    private file PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE;
    private file EXCEL_CELLAVISTA_FILE;
    private file CELLAVISTA_PLATE_LOOKUP_FILE;
    private variable varShellProgram;
    private variable varCellavistaFileName;
    private file PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_TCD;
    private file PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VCD;
    private file PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VIA;
    if (varDisplayType == 1)
    {
      varCellavistaFileName = StrConcat4(Translate("\"C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\CellavistaOutput\\"), cellavistaExperiment, Translate(".xls\""), Translate(""));
      varShellProgram = StrConcat4(Translate("\"C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\CellavistaDataTable.cmd\" "), varCellavistaFileName, Translate(""), Translate(""));
    }
    else
    {
      varCellavistaFileName = StrConcat4(Translate("\"C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\CellavistaOutput\\"), Translate("Notebook_"), cellavistaExperiment, Translate(".xls\""));
      if (varChoiceSetup == 0)
      {
        varShellProgram = StrConcat4(Translate("\"C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\96dwNotebookCount.cmd\" "), varCellavistaFileName, Translate(""), Translate(""));
      }
      if (varChoiceSetup == 1)
      {
        if(0){
          varShellProgram = StrConcat4(Translate("\"C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\96dwNotebookDualPassage.cmd\" "), varCellavistaFileName, Translate(""), Translate(""));
        }
        varShellProgram = StrConcat4(Translate("\"C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\96dwNotebookTerminal.cmd\" "), varCellavistaFileName, Translate(""), Translate(""));
      }
      if (varChoiceSetup == 2)
      {
        varShellProgram = StrConcat4(Translate("\"C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\96dwNotebookPassage.cmd\" "), varCellavistaFileName, Translate(""), Translate(""));
      }
    }
    TrcTrace(Translate("Cellavista File Name: "), varCellavistaFileName);
    TrcTrace(Translate("Cellavista Shell Program: "), varShellProgram);
    {
      if( 0 == Shell(varShellProgram, hslShow, hslSynchronous) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    {
      for(PlateNumber = 0; PlateNumber < DWPsThisTime;)
      {
        PlateNumber = PlateNumber + 1;
        SpreadsheetName = StrConcat4(Translate("Plate"), PlateNumber, Translate("$"), Translate(""));
        row = 1;
        PlateColID = 1;
        PlateBarcode=arrBaracodesSetUpPlates.GetAt(PlateNumber-1);
        PassPlateBarcode=arrBaracodesPassagePlates.GetAt(PlateNumber-1);
        TermPlateBarcode=arrBaracodesTerminalPlates.GetAt(PlateNumber-1);
        {
          for(loopCounter5 = 0; loopCounter5 < 12;)
          {
            loopCounter5 = loopCounter5 + 1;
            {
              for(loopCounter1 = 0; loopCounter1 < 8;)
              {
                loopCounter1 = loopCounter1 + 1;
                TranslateRowCoordinate(row, rowAlpha);
                PlatePosID = StrConcat2(rowAlpha, PlateColID);
                if(0){
                  sqlStatement = StrConcat8(Translate("SELECT * FROM [CellavistaTestPlateTable] WHERE [CulturePlateBarcode] = '"), PlateBarcode, Translate("' AND [CulturePlateWellID] = '"), PlatePosID, Translate("' AND [experimentID] = '"), experimentID, Translate("'"), Translate(" ORDER BY [Date] DESC"));
                }
                sqlStatement = StrConcat8(Translate("SELECT * FROM [SampleTrackingTable] WHERE [SourceBarcode] = '"), PlateBarcode, Translate("' AND [SourceWell] = '"), PlatePosID, Translate("' AND [SourceVesselType] = '96DW' AND [ProcessStep] = 'SuspensionCellCount' AND [ExperimentID] = '"), experimentID, Translate("'"), Translate(" ORDER BY [DateTime] DESC"));
                TrcTrace(Translate("Looking For Cellavista Plate SQL Statement: "), sqlStatement);
                CELLAVISTA_PLATE_LOOKUP_FILE.AddField("DestinationBarcode", testPlateBarcode, hslString, 255);
                CELLAVISTA_PLATE_LOOKUP_FILE.AddField("DestinationWell", testPlatePosID, hslString, 255);
                CELLAVISTA_PLATE_LOOKUP_FILE.SetDelimiter(";");
                if( 0 == CELLAVISTA_PLATE_LOOKUP_FILE.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
                }
                if( 0 == CELLAVISTA_PLATE_LOOKUP_FILE.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 != CELLAVISTA_PLATE_LOOKUP_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                CELLAVISTA_PLATE_LOOKUP_FILE.RemoveFields();
                if(0){
                  sqlStatement = StrConcat8(Translate("SELECT * FROM [CellavistaDensityReadingTable] WHERE [TestPlateBarcode] = '"), testPlateBarcode, Translate("' AND [TestPlateWellID] = '"), testPlatePosID, Translate("' AND [experimentID] = '"), experimentID, Translate("'"), Translate(" ORDER BY [Date] DESC"));
                  TrcTrace(Translate("Looking for Cell Counts SQL Statement: "), sqlStatement);
                  PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE.AddField("TotalCellDensity", iTCD, hslFloat);
                  PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE.AddField("CalculatedViableCellDensity", iVCD, hslFloat);
                  PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE.AddField("Viability", iViability, hslFloat);
                  PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE.SetDelimiter(";");
                  if( 0 == PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
                  }
                  if( 0 == PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE.RemoveFields();
                }
                sqlStatement = StrConcat8(Translate("SELECT * FROM [AnalyticResultTable] WHERE [SampleBarcode] = '"), testPlateBarcode, Translate("' AND [SampleWell] = '"), testPlatePosID, Translate("' AND [ExperimentID] = '"), experimentID, Translate("' AND [SampleVesselType] = '384w' AND [ResultType] = 'VCD'"), Translate(" ORDER BY [DateTime] DESC"));
                TrcTrace(Translate("Looking for Cell Counts SQL Statement: "), sqlStatement);
                PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VCD.AddField("Result", iVCD, hslFloat);
                PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VCD.SetDelimiter(";");
                if( 0 == PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VCD.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
                }
                if( 0 == PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VCD.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 != PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VCD.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VCD.RemoveFields();
                sqlStatement = StrConcat8(Translate("SELECT * FROM [AnalyticResultTable] WHERE [SampleBarcode] = '"), testPlateBarcode, Translate("' AND [SampleWell] = '"), testPlatePosID, Translate("' AND [ExperimentID] = '"), experimentID, Translate("' AND [SampleVesselType] = '384w' AND [ResultType] = 'TCD'"), Translate(" ORDER BY [DateTime] DESC"));
                TrcTrace(Translate("Looking for Cell Counts SQL Statement: "), sqlStatement);
                PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_TCD.AddField("Result", iTCD, hslFloat);
                PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_TCD.SetDelimiter(";");
                if( 0 == PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_TCD.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
                }
                if( 0 == PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_TCD.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 != PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_TCD.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_TCD.RemoveFields();
                MECC::TraceComment(Translate("*************** CellaVistaSubMethod: Find Cellavista data based on previosuly found 384well plate barcode and well id"));
                sqlStatement = StrConcat8(Translate("SELECT * FROM [AnalyticResultTable] WHERE [SampleBarcode] = '"), testPlateBarcode, Translate("' AND [SampleWell] = '"), testPlatePosID, Translate("' AND [ExperimentID] = '"), experimentID, Translate("' AND [SampleVesselType] = '384w' AND [ResultType] = 'Viability'"), Translate(" ORDER BY [DateTime] DESC"));
                TrcTrace(Translate("********************************* Looking for Cell Counts SQL Statement: "), sqlStatement);
                PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VIA.AddField("Result", iViability, hslFloat);
                PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VIA.SetDelimiter(";");
                if( 0 == PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VIA.Open(SampleTrackingDB_glDBName, hslRead, sqlStatement, SampleTrackingDB_glConnectionString) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, SampleTrackingDB_glDBName, "HxMetEdCompCmd");
                }
                if( 0 == PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VIA.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 != PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VIA.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                PASSAGE_PLATE_CELLAVISTA_DATA_LOOKUP_FILE_VIA.RemoveFields();
                if (varDisplayType == 1)
                {
                  varCellavistaFileName2 = StrConcat4(Translate("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\CellavistaOutput\\"), cellavistaExperiment, Translate(".xls"), Translate(""));
                  EXCEL_CELLAVISTA_FILE.AddField("Position", PlatePosID, hslString, 255);
                  EXCEL_CELLAVISTA_FILE.AddField("TCD", iTCD, hslFloat);
                  EXCEL_CELLAVISTA_FILE.AddField("VCD", iVCD, hslFloat);
                  EXCEL_CELLAVISTA_FILE.AddField("Viability", iViability, hslFloat);
                  EXCEL_CELLAVISTA_FILE.AddField("Barcode", PlateBarcode, hslString, 255);
                  if( 0 == EXCEL_CELLAVISTA_FILE.Open(varCellavistaFileName2 + " " + SpreadsheetName, hslAppend) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, varCellavistaFileName2, "HxMetEdCompCmd");
                  }
                }
                else
                {
                  varCellavistaFileName2 = StrConcat4(Translate("C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\CellavistaOutput\\"), Translate("Notebook_"), cellavistaExperiment, Translate(".xls"));
                  EXCEL_CELLAVISTA_FILE.AddField("Position", PlatePosID, hslString, 255);
                  EXCEL_CELLAVISTA_FILE.AddField("TCD", iTCD, hslFloat);
                  EXCEL_CELLAVISTA_FILE.AddField("VCD", iVCD, hslFloat);
                  EXCEL_CELLAVISTA_FILE.AddField("Viability", iViability, hslFloat);
                  EXCEL_CELLAVISTA_FILE.AddField("Barcode", PlateBarcode, hslString, 255);
                  EXCEL_CELLAVISTA_FILE.AddField("PassBarcode", PassPlateBarcode, hslString, 255);
                  EXCEL_CELLAVISTA_FILE.AddField("TermBarcode", TermPlateBarcode, hslString, 255);
                  if( 0 == EXCEL_CELLAVISTA_FILE.Open(varCellavistaFileName2 + " " + SpreadsheetName, hslAppend) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, varCellavistaFileName2, "HxMetEdCompCmd");
                  }
                }
                if( 0 == EXCEL_CELLAVISTA_FILE.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 != EXCEL_CELLAVISTA_FILE.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                EXCEL_CELLAVISTA_FILE.RemoveFields();
                if (row < 8)
                {
                  row = row + 1;
                }
                else
                {
                  row = 1;
                }
              }
            }
            if (PlateColID < 12)
            {
              PlateColID = PlateColID + 1;
            }
            else
            {
              PlateColID = 1;
            }
          }
        }
      }
    }
    if (varDisplayType == 0)
    {
      if(0){
        TrcTrace(Translate("experimentID - "), experimentID);
        TrcTrace(Translate("cellavistaExperiment - "), cellavistaExperiment);
        TrcTrace(Translate("targetCellDensity - "), targetCellDensity);
        TrcTrace(Translate("targetCellDensityTerm - "), targetCellDensityTerm);
        TrcTrace(Translate("mediaType - "), mediaType);
        TrcTrace(Translate("mediaLot - "), mediaLot);
        TrcTrace(Translate("mediaType2 - "), mediaType2);
        TrcTrace(Translate("mediaLot2 - "), mediaLot2);
        TrcTrace(Translate("targetVolume - "), targetVolume);
        TrcTrace(Translate("barcodeReadPlate - "), barcodeReadPlate);
        TrcTrace(Translate("date - "), date);
        TrcTrace(Translate("time - "), time);
      }
      EXCEL_CELLAVISTA_FILE.AddField("TicketID", experimentID, hslString, 255);
      EXCEL_CELLAVISTA_FILE.AddField("CellavistaExp", cellavistaExperiment, hslString, 255);
      EXCEL_CELLAVISTA_FILE.AddField("PassVCD", targetCellDensity, hslFloat);
      EXCEL_CELLAVISTA_FILE.AddField("TermTCD", targetCellDensityTerm, hslFloat);
      EXCEL_CELLAVISTA_FILE.AddField("MediaType", mediaType, hslString, 255);
      EXCEL_CELLAVISTA_FILE.AddField("MediaLot", mediaLot, hslString, 255);
      EXCEL_CELLAVISTA_FILE.AddField("MediaType2", mediaType2, hslString, 255);
      EXCEL_CELLAVISTA_FILE.AddField("MediaLot2", mediaLot2, hslString, 255);
      EXCEL_CELLAVISTA_FILE.AddField("WvolPass", targetVolume, hslFloat);
      EXCEL_CELLAVISTA_FILE.AddField("WvolTerm", targetVolume, hslFloat);
      EXCEL_CELLAVISTA_FILE.AddField("CellaBarcode", barcodeReadPlate, hslString, 255);
      EXCEL_CELLAVISTA_FILE.AddField("Date", date, hslString, 255);
      EXCEL_CELLAVISTA_FILE.AddField("Time", time, hslString, 255);
      if( 0 == EXCEL_CELLAVISTA_FILE.Open(varCellavistaFileName2 + " " + "NotebookData$", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, varCellavistaFileName2, "HxMetEdCompCmd");
      }
      if( 0 == EXCEL_CELLAVISTA_FILE.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != EXCEL_CELLAVISTA_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      EXCEL_CELLAVISTA_FILE.RemoveFields();
    }
    varShellProgram = StrConcat4(Translate("\"C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\OpenCellavistaDataTable.cmd\" "), varCellavistaFileName, Translate(""), Translate(""));
    {
      if( 0 == Shell(varShellProgram, hslShow, hslSynchronous) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }

  private function TranslateRowCoordinate( variable iRowNumber, variable & oRowAlpha ) void {
    oRowAlpha = 0;
    if (iRowNumber == 1)
    {
      oRowAlpha = Translate("A");
    }
    if (iRowNumber == 2)
    {
      oRowAlpha = Translate("B");
    }
    if (iRowNumber == 3)
    {
      oRowAlpha = Translate("C");
    }
    if (iRowNumber == 4)
    {
      oRowAlpha = Translate("D");
    }
    if (iRowNumber == 5)
    {
      oRowAlpha = Translate("E");
    }
    if (iRowNumber == 6)
    {
      oRowAlpha = Translate("F");
    }
    if (iRowNumber == 7)
    {
      oRowAlpha = Translate("G");
    }
    if (iRowNumber == 8)
    {
      oRowAlpha = Translate("H");
    }
    if (iRowNumber == 9)
    {
      oRowAlpha = Translate("I");
    }
    if (iRowNumber == 10)
    {
      oRowAlpha = Translate("J");
    }
    if (iRowNumber == 11)
    {
      oRowAlpha = Translate("K");
    }
    if (iRowNumber == 12)
    {
      oRowAlpha = Translate("L");
    }
    if (iRowNumber == 13)
    {
      oRowAlpha = Translate("M");
    }
    if (iRowNumber == 14)
    {
      oRowAlpha = Translate("N");
    }
    if (iRowNumber == 15)
    {
      oRowAlpha = Translate("O");
    }
    if (iRowNumber == 16)
    {
      oRowAlpha = Translate("P");
    }
  }

  function Cellavista_FACS_Image_Transfer( variable worklistFile, variable computerchoice, variable folderchoice ) void {
    private variable varCheckDrive;
    private dialog dialogHandle_4;
    private dialog dialogHandle_5;
    private dialog dialogHandle_6;
    private variable varShellProgram;
    private variable FACSPlateBarcode;
    private variable intCol;
    private variable Row;
    private variable DestinationFolder;
    private variable FACSPlatePosID;
    private variable CellavistaWell;
    private variable loopCounter2;
    private variable Col;
    private variable SourceFolder;
    private variable cCol;
    private file READ_WORKLIST_FILE;
    private dialog dialogHandle_7;
    private variable strSQL;
    varCheckDrive = FilSearchPath(Translate("I:\\(F) RAW DATA\\(F) Cellavista FACS Images\\DirectoryCheck.txt"));
    if (varCheckDrive == "")
    {
      TrcTrace(Translate("The I-drive isn't mapped, images stored locally on Hamilton PC"), Translate(""));
      folderchoice = 1;
    }
    strSQL = "SELECT [384w Plate Barcode], [384w Pos ID] FROM [ExperimentData] WHERE [Select Clone] = 1 ORDER BY [384w Plate Barcode] ASC";
    Trace (strSQL);
    if(0){
      READ_WORKLIST_FILE.AddField("384w Plate Barcode", FACSPlateBarcode, hslString, 255);
      READ_WORKLIST_FILE.AddField("384w Pos ID", FACSPlatePosID, hslString, 255);
      if( 0 == READ_WORKLIST_FILE.Open(worklistFile + " " + "ExperimentData$", hslRead, "SELECT [384w Plate Barcode], [384w Pos ID] FROM [ExperimentData] WHERE [Select Clone] = 1 ORDER BY [384w Plate Barcode] ASC") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklistFile, "HxMetEdCompCmd");
      }
    }
    READ_WORKLIST_FILE.AddField("384w Plate Barcode", FACSPlateBarcode, hslString, 255);
    READ_WORKLIST_FILE.AddField("384w Pos ID", FACSPlatePosID, hslString, 255);
    if( 0 == READ_WORKLIST_FILE.Open(worklistFile + " " + "ExperimentData$", hslRead, strSQL) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklistFile, "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (READ_WORKLIST_FILE.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == READ_WORKLIST_FILE.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (FACSPlateBarcode != "None")
        {
          Col = StrMid(FACSPlatePosID, 1, 2);
          intCol = StrIVal(Col);
          if (intCol < 10)
          {
            cCol = StrConcat4(Translate("-0"), Col, Translate(""), Translate(""));
          }
          else
          {
            cCol = StrConcat4(Translate("-"), Col, Translate(""), Translate(""));
          }
          Row = StrLeft(FACSPlatePosID, 1);
          CellavistaWell = StrConcat2(Row, cCol);
          if(0){
            dialogHandle_7.SetOutput(Translate("Cellavista Well - "), CellavistaWell);
            dialogHandle_7.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
          if (computerchoice == 1)
          {
            if(0){
              SourceFolder = StrConcat8(Translate("\\\SY-257\\E (Data)\\Experiments\\FACS_"), SampleTrackingDB_glExperimentID, Translate("_"), FACSPlateBarcode, Translate("\\Measurement_000"), Translate("\\"), CellavistaWell, Translate(""));
            }
            SourceFolder = StrConcat8(Translate("Y:\\FACS_"), SampleTrackingDB_glExperimentID, Translate("_"), FACSPlateBarcode, Translate("\\Measurement_000"), Translate("\\"), CellavistaWell, Translate(""));
          }
          if (computerchoice == 2)
          {
            if(0){
              SourceFolder = StrConcat8(Translate("\\\SY-256\\E\\Experiments\\FACS_"), SampleTrackingDB_glExperimentID, Translate("_"), FACSPlateBarcode, Translate("\\Measurement_000"), Translate("\\"), CellavistaWell, Translate(""));
            }
            SourceFolder = StrConcat8(Translate("Z:\\FACS_"), SampleTrackingDB_glExperimentID, Translate("_"), FACSPlateBarcode, Translate("\\Measurement_000"), Translate("\\"), CellavistaWell, Translate(""));
          }
          if(0){
            dialogHandle_6.SetOutput(Translate("Source Folder - "), SourceFolder);
            dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
          if (folderchoice == 0)
          {
            DestinationFolder = StrConcat8(Translate("I:\\(F) RAW DATA\\(F) Cellavista FACS Images"), Translate("\\"), SampleTrackingDB_glExperimentID, Translate("\\"), FACSPlateBarcode, Translate("."), FACSPlatePosID, Translate(""));
          }
          if (folderchoice == 1)
          {
            DestinationFolder = StrConcat8(Translate("C:\\Hamilton Files\\FACS Images"), Translate("\\"), SampleTrackingDB_glExperimentID, Translate("\\"), FACSPlateBarcode, Translate("."), FACSPlatePosID, Translate(""));
          }
          if(0){
            dialogHandle_4.SetOutput(Translate("Destination Folder - "), DestinationFolder);
            dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
          varShellProgram = StrConcat8(Translate("\"C:\\Program Files (x86)\\HAMILTON\\System\\MedImmune System Files\\FACSRoboCopyImages.cmd\" "), Translate("\""), SourceFolder, Translate(""), Translate(""), Translate("\" \""), DestinationFolder, Translate("\""));
          if(0){
            dialogHandle_5.SetOutput(Translate("varShellProgram - "), varShellProgram);
            dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
          {
            if( 0 == Shell(varShellProgram, hslShow, hslSynchronous) )
            {
                  MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
      }
    }
    if( 0 != READ_WORKLIST_FILE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    READ_WORKLIST_FILE.RemoveFields();
  }

  function Get_Cellavista_Results_FL_LiveDead( variable csvFileName, variable plateType, variable & arr_WellID[], variable & arr_TCD[], variable & arr_VCD[], variable & arr_Via[], variable DilutionFactor, variable CellavistaVolume ) void {
    private variable TCD;
    private variable DeadStained;
    private variable VCD;
    private variable Row;
    private variable Viability;
    private variable WellID;
    private variable TCN;
    private variable Col;
    private variable csvReadLoopCounter;
    private file READ_RESULTS_CSV;
    private variable CalibrationFactor;
    private variable DeadStainedFloat;
    private variable str_ShellCommand;
    private variable int_ExportLocation;
    private variable int_FileLocation;
    private variable str_NewFile;
    private variable csvloop;
    private variable str_FileName;
    private variable varCheckDrive;
    private variable csvloopcounter;
    private timer CSVTimer;
    arr_WellID.SetSize( 0);
    arr_TCD.SetSize( 0);
    arr_VCD.SetSize( 0);
    arr_Via.SetSize( 0);
    TrcTrace(Translate("***SynenTec NyOne Before csv loop***"), Translate(""));
    csvloop = 1;
    {
      csvloopcounter = 0;
      while (csvloop == 1)
      {
        csvloopcounter = csvloopcounter + 1;
        TrcTrace(Translate("SynenTec NyOne SMT CSV File Name: "), csvFileName);
        varCheckDrive = FilSearchPath(csvFileName);
        TrcTrace(Translate("SynenTec NyOne SMT varCheckDrive: "), varCheckDrive);
        if (varCheckDrive == "")
        {
          if (csvloopcounter == 11)
          {
            Trace ("File Copy Error : Breaking Loop");
            break;
          }
          csvloop = 1;
          Trace ("File Copy Error Attempt " +csvloopcounter+ " : Retry in 30 Seconds");
          if( 0 == CSVTimer.SetTimer(30) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == CSVTimer.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          csvloop = 0;
          int_ExportLocation = StrFind(csvFileName, Translate("Export"));
          Trace (int_ExportLocation);
          int_FileLocation = int_ExportLocation + 7;
          str_FileName = StrMid(csvFileName, int_FileLocation, 200);
          Trace (str_FileName);
          str_NewFile = StrConcat4(Translate("C:\\Program Files (x86)\HAMILTON\\System\MedImmune System Files\\TempCSV\\"), str_FileName, Translate(""), Translate(""));
          Trace (str_NewFile);
          str_ShellCommand = StrConcat8(Translate("C:\\Program Files (x86)\\HAMILTON\\System\MedImmune System Files\\CellavistaCopyCSV.cmd \""), csvFileName, Translate("\" \""), str_NewFile, Translate("\""), Translate(""), Translate(""), Translate(""));
          Trace (str_ShellCommand);
          Trace ("Copying CSV results file from Cellavista to Hamilton PC");
          {
            if( 0 == Shell(str_ShellCommand, hslShow, hslSynchronous) )
            {
                  MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          if( 0 == CSVTimer.SetTimer(30) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == CSVTimer.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          csvFileName = str_NewFile;
        }
      }
    }
    arr_WellID.SetSize(0);
    arr_TCD.SetSize(0);
    arr_VCD.SetSize(0);
    arr_Via.SetSize(0);
    CalibrationFactor = 1.2;
    READ_RESULTS_CSV.SetExtendedProperties( "HDR=NO");
    READ_RESULTS_CSV.AddField(1, Row, hslString, 255);
    READ_RESULTS_CSV.AddField(2, Col, hslString, 255);
    READ_RESULTS_CSV.AddField(3, TCN, hslFloat);
    READ_RESULTS_CSV.AddField(4, DeadStained, hslString, 255);
    READ_RESULTS_CSV.SetDelimiter(hslCSVDelimited);
    if( 0 == READ_RESULTS_CSV.Open(csvFileName, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, csvFileName, "HxMetEdCompCmd");
    }
    {
      csvReadLoopCounter = 0;
      while (
         (READ_RESULTS_CSV.Eof() == 0)
      )
      {
        csvReadLoopCounter = csvReadLoopCounter + 1;
        if( 0 == READ_RESULTS_CSV.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (csvReadLoopCounter > 2)
        {
          onerror goto errLabel_8 ;
          err.Clear();
          WellID = StrConcat2(Row, Col);
          errLabel_8 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            break;
          }   /* end if from skip handler if no error */
          onerror goto errLabel_9 ;
          err.Clear();
          if (DeadStained != "")
          {
            DeadStainedFloat = StrFVal(DeadStained);
          }
          errLabel_9 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            DeadStainedFloat = 0.0;
          }   /* end if from skip handler if no error */
          TCD = ((TCN / CellavistaVolume) * 1000 * DilutionFactor * CalibrationFactor);
          Viability = (100 - DeadStainedFloat);
          VCD = TCD * (Viability/100);
          if(0){
            TCD = MthRound(TCD, 1);
            VCD = MthRound(VCD, 1);
            Viability = MthRound(Viability, 1);
          }
          if(0){
            TrcTrace(Translate("Well - "), WellID);
            TrcTrace(Translate("DeadStained - "), DeadStained);
            TrcTrace(Translate("DeadStainedFloat - "), DeadStainedFloat);
            TrcTrace(Translate("TCD - "), TCD);
            TrcTrace(Translate("VCD - "), VCD);
            TrcTrace(Translate("Viability - "), Viability);
          }
          arr_WellID.AddAsLast(WellID);
          arr_TCD.AddAsLast(TCD);
          arr_VCD.AddAsLast(VCD);
          arr_Via.AddAsLast(Viability);
        }
      }
    }
    if( 0 != READ_RESULTS_CSV.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    READ_RESULTS_CSV.RemoveFields();
    str_ShellCommand = StrConcat8(Translate("C:\\Program Files (x86)\\HAMILTON\\System\MedImmune System Files\\CellavistaDeleteCSV.cmd \""), csvFileName, Translate("\""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace (str_ShellCommand);
    Trace ("Deleting results CSV file from Hamilton PC");
    {
      if( 0 == Shell(str_ShellCommand, hslShow, hslSynchronous) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
} // library namespace
