#pragma once
#include "HSLMthLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLExtensions\\String.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLErrLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSL_MethodHelper.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLFilLib.hsl"
#include "HSLDevLib.hsl"
#include "STAR Tools\\Resources\\SubMethods\\HelperLibrary.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace FW_HELPERLIBRARY {
  global variable G_FW_PIP_COM_TotalChannels;
  global variable G_FW_PIP_COM_XArmMin;
  global variable G_FW_PIP_COM_XArmMax;
  global variable G_FW_PIP_COM_MPH_Exist;
  global variable G_FW_PIP_COM_SimulationMode;
  global variable G_FW_XL_COM_TotalChannels;
  global variable G_FW_PIP_COM_InstrumentType;
  global variable G_FW_XL_COM_Raster;
  global variable G_FW_PIP_COM_Raster;
  global variable G_FW_PIP_COM_FirmwareType;
  global variable G_FW_PIP_COM_LibraryInitialized(0);
  global variable G_ARR_FW_XL_COM_YMax[];
  global variable G_ARR_FW_PIP_COM_YMin[];
  global variable G_ARR_FW_PIP_COM_YMax[];
  global variable G_ARR_FW_XL_COM_YMin[];
  function CheckForError( variable i_str_FunctionName, variable i_str_ReturnValue, variable i_bool_RaiseError ) void ;
  function GetChannelNumber( variable & io_int_ChannelNumber ) void ;
  function GetChannelValue( variable i_int_ChannelNumber, variable & o_str_ChannelValue ) void ;
  function GetErrorDescriptionMainError( variable i_str_ErrorCode, variable & o_str_ErrorDescription ) void ;
  function GetErrorDescriptionSlaveError( variable i_str_ErrorCode, variable & o_str_ErrorDescription ) void ;
  function GetSlaveError( variable i_str_ReturnValue, variable & o_arr_Channels[], variable & o_arr_SlaveErrors[], variable & o_arr_ErrorDescription[] ) void ;
  function Get_Instrument_Type( device & ML_STAR, variable & o_int_InstrumentType, variable & o_int_MaxAutoloadTracks ) variable ;
  function Get_X_Ranges_STAR( device & ML_STAR, variable & o_flt_LeftXMin, variable & o_flt_LeftXMax, variable & o_flt_RightXMin, variable & o_flt_RightXMax ) void ;
  function InitFunction( device & ML_STAR ) void ;
  function Parse_Parameter_Multiple( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable i_int_MaxValues, variable & o_bol_ParameterFound, variable & o_arr_flt_Value[] ) void ;
  function Parse_Parameter_Multiple2( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable & o_bol_ParameterFound, variable & o_arr_flt_Value[] ) void ;
  function Parse_Parameter_Single( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable & o_bol_ParameterFound, variable & o_flt_Value ) void ;
  function Parse_Parameter_Single_String( variable i_str_ParameterFull, variable i_str_Parameter, variable & o_bol_ParameterFound, variable & o_str_Value ) void ;
  function RemoveExcessDigits( variable & io_flt_Value ) void ;
  function SetParameter( variable i_strParameterName, variable i_fltValue, variable i_fltConversionValue, variable i_intTotalDigits, variable & o_strParameter ) void ;
  function SetParametersAll( variable i_strParameterName, variable i_fltValue, variable i_fltConversionValue, variable i_intTotalDigits, variable & o_strParameter ) void ;
  function SetParametersArr( variable i_strParameterName, variable & i_arrValues[], variable i_fltConversionValue, variable i_intTotalDigits, variable i_intTotalChannels, variable & o_strParameter ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    HELPERLIBRARY::_InitLibrary();
  }
  function _ExitLibrary() {
    HELPERLIBRARY::_ExitLibrary();
  }

  function GetErrorDescriptionMainError( variable i_str_ErrorCode, variable & o_str_ErrorDescription ) void {
    private variable str_ErrorDescription;
    private variable str_ErrorCause;
    o_str_ErrorDescription = 0;
    i_str_ErrorCode = StrConcat2(i_str_ErrorCode, Translate(""));
    str_ErrorDescription = Translate("Unknown error");
    str_ErrorCause = Translate("");
    o_str_ErrorDescription = Translate("");
    if (i_str_ErrorCode == "00")
    {
      str_ErrorDescription = Translate("No Error");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "01")
    {
      str_ErrorDescription = Translate("Syntax error");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "02")
    {
      str_ErrorDescription = Translate("Hardware error");
      str_ErrorCause = Translate("drive blocked, low power etc.");
    }
    if (i_str_ErrorCode == "03")
    {
      str_ErrorDescription = Translate("Command not completed");
      str_ErrorCause = Translate("error in previous sequence (not executed)");
    }
    if (i_str_ErrorCode == "04")
    {
      str_ErrorDescription = Translate("Clot detected");
      str_ErrorCause = Translate("LLD not interrupted");
    }
    if (i_str_ErrorCode == "05")
    {
      str_ErrorDescription = Translate("Barcode unreadable");
      str_ErrorCause = Translate("bad or missing barcode");
    }
    if (i_str_ErrorCode == "06")
    {
      str_ErrorDescription = Translate("Too little liquid");
      str_ErrorCause = Translate("liquid surface is not detected");
    }
    if (i_str_ErrorCode == "07")
    {
      str_ErrorDescription = Translate("Tip already fitted");
      str_ErrorCause = Translate("Repeated attempts to fit a tip or iSwap movement with tips");
    }
    if (i_str_ErrorCode == "08")
    {
      str_ErrorDescription = Translate("No Tip");
      str_ErrorCause = Translate("command was started without fitting tip");
    }
    if (i_str_ErrorCode == "09")
    {
      str_ErrorDescription = Translate("No Carrier");
      str_ErrorCause = Translate("load command without carrier");
    }
    if (i_str_ErrorCode == "10")
    {
      str_ErrorDescription = Translate("Not completed");
      str_ErrorCause = Translate("Command in command buffer was aborted due to an error in a previous command, or command stack was deleted");
    }
    if (i_str_ErrorCode == "11")
    {
      str_ErrorDescription = Translate("Dispense with pressure LLD");
      str_ErrorCause = Translate("dispense with pressure LLD is not permitted");
    }
    if (i_str_ErrorCode == "12")
    {
      str_ErrorDescription = Translate("No Teach In Signal");
      str_ErrorCause = Translate("X-Movement to LLD reached maximum allowable position without detecting Teach in signal");
    }
    if (i_str_ErrorCode == "13")
    {
      str_ErrorDescription = Translate("Loading Tray error");
      str_ErrorCause = Translate("position already occupied");
    }
    if (i_str_ErrorCode == "14")
    {
      str_ErrorDescription = Translate("Sequenced aspiration with pressure LLD");
      str_ErrorCause = Translate("sequenced aspiration with pressure LLD is not permitted");
    }
    if (i_str_ErrorCode == "15")
    {
      str_ErrorDescription = Translate("Not allowed parameter combination");
      str_ErrorCause = Translate("i.e. PLLD and dispense or wrong X-drive assignment");
    }
    if (i_str_ErrorCode == "16")
    {
      str_ErrorDescription = Translate("Cover close error");
      str_ErrorCause = Translate("cover is not closed and couldn't be locked");
    }
    if (i_str_ErrorCode == "17")
    {
      str_ErrorDescription = Translate("Aspiration error");
      str_ErrorCause = Translate("aspiration liquid stream error detected");
    }
    if (i_str_ErrorCode == "18")
    {
      str_ErrorDescription = Translate("Wash fluid or waste error");
      str_ErrorCause = Translate("missing wash fluid, or waste of particular washer is full");
    }
    if (i_str_ErrorCode == "19")
    {
      str_ErrorDescription = Translate("Incubation error");
      str_ErrorCause = Translate("incubator temperature out of limit");
    }
    if (i_str_ErrorCode == "20")
    {
      str_ErrorDescription = Translate("TADM measurement error");
      str_ErrorCause = Translate("overshoot of limits during aspiration or dispensation");
    }
    if (i_str_ErrorCode == "21")
    {
      str_ErrorDescription = Translate("No element");
      str_ErrorCause = Translate("expected element not detected");
    }
    if (i_str_ErrorCode == "22")
    {
      str_ErrorDescription = Translate("Element still holding");
      str_ErrorCause = Translate("Get command is sent twice or element is not discarded");
    }
    if (i_str_ErrorCode == "23")
    {
      str_ErrorDescription = Translate("Element lost");
      str_ErrorCause = Translate("expected element is missing (lost)");
    }
    if (i_str_ErrorCode == "24")
    {
      str_ErrorDescription = Translate("Illegal target plate position");
      str_ErrorCause = Translate("over or underflow of iSWAP positions or iSWAP is not in park position during pipetting activities");
    }
    if (i_str_ErrorCode == "25")
    {
      str_ErrorDescription = Translate("Illegal user access");
      str_ErrorCause = Translate("carrier was manually removed or cover is open");
    }
    if (i_str_ErrorCode == "26")
    {
      str_ErrorDescription = Translate("TADM measurement error");
      str_ErrorCause = Translate("exciding of limits during aspiration or dispensation");
    }
    if (i_str_ErrorCode == "27")
    {
      str_ErrorDescription = Translate("Posiition not reachable");
      str_ErrorCause = Translate("position out of mechanical limits using iSWAP, CoRe gripper or PIP-channels");
    }
    if (i_str_ErrorCode == "28")
    {
      str_ErrorDescription = Translate("unexpected LLD");
      str_ErrorCause = Translate("Liquid level is reached before LLD scanning is started");
    }
    if (i_str_ErrorCode == "29")
    {
      str_ErrorDescription = Translate("area already occupied");
      str_ErrorCause = Translate("Its impossible to occupy area because this area is already in use");
    }
    if (i_str_ErrorCode == "30")
    {
      str_ErrorDescription = Translate("impossible to occupy area");
      str_ErrorCause = Translate("Area cant be occupied because is no solution for arm prepositioning");
    }
    if (i_str_ErrorCode == "99")
    {
      str_ErrorDescription = Translate("Slave error");
      str_ErrorCause = Translate("");
    }
    if (str_ErrorCause == "")
    {
      o_str_ErrorDescription = StrConcat4(str_ErrorDescription, Translate(""), Translate(""), Translate(""));
    }
    else
    {
      o_str_ErrorDescription = StrConcat4(str_ErrorDescription, Translate(" :: "), str_ErrorCause, Translate(""));
    }
  }

  function GetErrorDescriptionSlaveError( variable i_str_ErrorCode, variable & o_str_ErrorDescription ) void {
    private variable str_ErrorDescription;
    private variable str_ErrorCause;
    private variable str_ErrorHeader;
    o_str_ErrorDescription = 0;
    i_str_ErrorCode = StrConcat2(i_str_ErrorCode, Translate(""));
    str_ErrorHeader = Translate("");
    str_ErrorDescription = Translate("Unknown error");
    str_ErrorCause = Translate("");
    o_str_ErrorDescription = Translate("");
    if (i_str_ErrorCode == "00")
    {
      str_ErrorHeader = Translate("");
      str_ErrorDescription = Translate("No Error");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "20")
    {
      str_ErrorHeader = StrConcat2(Translate("Transfer check"), Translate(" :: "));
      str_ErrorDescription = Translate("No communication to EEPROM");
      str_ErrorCause = Translate("I2C Bus or EEPROM not working");
    }
    if (i_str_ErrorCode == "30")
    {
      str_ErrorHeader = StrConcat2(Translate("Syntax check"), Translate(" :: "));
      str_ErrorDescription = Translate("Undefined command");
      str_ErrorCause = Translate("unknown command");
    }
    if (i_str_ErrorCode == "31")
    {
      str_ErrorHeader = StrConcat2(Translate("Syntax check"), Translate(" :: "));
      str_ErrorDescription = Translate("Undefined parameter");
      str_ErrorCause = Translate("unknown parameter");
    }
    if (i_str_ErrorCode == "32")
    {
      str_ErrorHeader = StrConcat2(Translate("Syntax check"), Translate(" :: "));
      str_ErrorDescription = Translate("Parameter out of range");
      str_ErrorCause = Translate("parameter outside permitted range");
    }
    if (i_str_ErrorCode == "35")
    {
      str_ErrorHeader = StrConcat2(Translate("General errors during execution of commands"), Translate(" :: "));
      str_ErrorDescription = Translate("Voltages outside permitted range");
      str_ErrorCause = Translate("Hardware not working properly");
    }
    if (i_str_ErrorCode == "36")
    {
      str_ErrorHeader = StrConcat2(Translate("General errors during execution of commands"), Translate(" :: "));
      str_ErrorDescription = Translate("Stop during execution of a command");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "37")
    {
      str_ErrorHeader = StrConcat2(Translate("General errors during execution of commands"), Translate(" :: "));
      str_ErrorDescription = Translate("Movement interrupted");
      str_ErrorCause = Translate("Second core gripper pipetting channel has a step loss");
    }
    if (i_str_ErrorCode == "40")
    {
      str_ErrorHeader = StrConcat2(Translate("Parallelity errors"), Translate(" :: "));
      str_ErrorDescription = Translate("No parallel processes permitted");
      str_ErrorCause = Translate("Two or more commands sent for the same control");
    }
    if (i_str_ErrorCode == "50")
    {
      str_ErrorHeader = StrConcat2(Translate("Dispensing drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Init. position not found");
      str_ErrorCause = Translate("Hardware not working");
    }
    if (i_str_ErrorCode == "51")
    {
      str_ErrorHeader = StrConcat2(Translate("Dispensing drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive not initialized");
      str_ErrorCause = Translate("Command sent before drive initialized");
    }
    if (i_str_ErrorCode == "52")
    {
      str_ErrorHeader = StrConcat2(Translate("Dispensing drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Movement error");
      str_ErrorCause = Translate("step loss");
    }
    if (i_str_ErrorCode == "53")
    {
      str_ErrorHeader = StrConcat2(Translate("Dispensing drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Maximum volume in tip reached");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "54")
    {
      str_ErrorHeader = StrConcat2(Translate("Dispensing drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Position out of permitted area");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "55")
    {
      str_ErrorHeader = StrConcat2(Translate("Y-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive blocked");
      str_ErrorCause = Translate("Hardware not working");
    }
    if (i_str_ErrorCode == "56")
    {
      str_ErrorHeader = StrConcat2(Translate("Y-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive not initialized");
      str_ErrorCause = Translate("Command sent before drive initialized");
    }
    if (i_str_ErrorCode == "57")
    {
      str_ErrorHeader = StrConcat2(Translate("Y-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Movement error");
      str_ErrorCause = Translate("Step loss");
    }
    if (i_str_ErrorCode == "60")
    {
      str_ErrorHeader = StrConcat2(Translate("Z-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive blocked");
      str_ErrorCause = Translate("Hardware not working");
    }
    if (i_str_ErrorCode == "61")
    {
      str_ErrorHeader = StrConcat2(Translate("Z-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive not initialized");
      str_ErrorCause = Translate("Command sent before drive initialized");
    }
    if (i_str_ErrorCode == "62")
    {
      str_ErrorHeader = StrConcat2(Translate("Z-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Movement error");
      str_ErrorCause = Translate("Step loss");
    }
    if (i_str_ErrorCode == "63")
    {
      str_ErrorHeader = StrConcat2(Translate("Z-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit stop not found");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "65")
    {
      str_ErrorHeader = StrConcat2(Translate("Squeezer drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive blocked");
      str_ErrorCause = Translate("Hardware not working");
    }
    if (i_str_ErrorCode == "66")
    {
      str_ErrorHeader = StrConcat2(Translate("Squeezer drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive not initialized");
      str_ErrorCause = Translate("Command sent before drive initialized");
    }
    if (i_str_ErrorCode == "67")
    {
      str_ErrorHeader = StrConcat2(Translate("Squeezer drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Movement error");
      str_ErrorCause = Translate("Step loss");
    }
    if (i_str_ErrorCode == "68")
    {
      str_ErrorHeader = StrConcat2(Translate("Squeezer drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Init. position adjustment error");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "70")
    {
      str_ErrorHeader = StrConcat2(Translate("Liquid Level Detection"), Translate(" :: "));
      str_ErrorDescription = Translate("No liquid level found");
      str_ErrorCause = Translate("No liquid present");
    }
    if (i_str_ErrorCode == "71")
    {
      str_ErrorHeader = StrConcat2(Translate("Liquid Level Detection"), Translate(" :: "));
      str_ErrorDescription = Translate("Not enough liquid present");
      str_ErrorCause = Translate("Immersion depth or surface following position below minimal access range");
    }
    if (i_str_ErrorCode == "72")
    {
      str_ErrorHeader = StrConcat2(Translate("Liquid Level Detection"), Translate(" :: "));
      str_ErrorDescription = Translate("Auto calibration at pressure sensor not possible");
      str_ErrorCause = Translate("Hardware not working");
    }
    if (i_str_ErrorCode == "73")
    {
      str_ErrorHeader = StrConcat2(Translate("Liquid Level Detection"), Translate(" :: "));
      str_ErrorDescription = Translate("No liquid level found with dual LLD");
      str_ErrorCause = Translate("Difference of LLD positions on dual LLD exceed the maximum");
    }
    if (i_str_ErrorCode == "74")
    {
      str_ErrorHeader = StrConcat2(Translate("Liquid Level Detection"), Translate(" :: "));
      str_ErrorDescription = Translate("Liquid at a not allowed position detected");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "75")
    {
      str_ErrorHeader = StrConcat2(Translate("Error on tip handling"), Translate(" :: "));
      str_ErrorDescription = Translate("No tip picked up");
      str_ErrorCause = Translate("No tip present at position");
    }
    if (i_str_ErrorCode == "76")
    {
      str_ErrorHeader = StrConcat2(Translate("Error on tip handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Tip already picked up");
      str_ErrorCause = Translate("A fresh tip cannot be picked up, because one is already present");
    }
    if (i_str_ErrorCode == "77")
    {
      str_ErrorHeader = StrConcat2(Translate("Error on tip handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Tip not discarded");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "78")
    {
      str_ErrorHeader = StrConcat2(Translate("Error on tip handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Wrong tip detected");
      str_ErrorCause = Translate("The tip picked up was not of tip type specified");
    }
    if (i_str_ErrorCode == "80")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Liquid not correctly aspirated");
      str_ErrorCause = Translate("Error in liquid aspiration");
    }
    if (i_str_ErrorCode == "81")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Clot detected");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "82")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("TADM measurement out of lower limit curve");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "83")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("TADM measurement out of upper limit curve");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "84")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Not enough memory for TADM measurement");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "85")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("No communication to digital potentiometer");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "86")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("ADC algorithm error");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "87")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("2nd phase of liquid not found");
      str_ErrorCause = Translate("No 2nd phase of liquid present");
    }
    if (i_str_ErrorCode == "88")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Not enough 2nd phase of liquid present");
      str_ErrorCause = Translate("Immersion depth or surface following position below minimal access range");
    }
    if (i_str_ErrorCode == "90")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit curve not resetable");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "91")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit curve not programmable");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "92")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit curve name not found");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "93")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit curve data incorrect");
      str_ErrorCause = Translate("Calculate data address out of limit curve address range or Syntax error");
    }
    if (i_str_ErrorCode == "94")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Not enough memory for limit curve");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "95")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Not allowed limit curve index");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "96")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit curve already stored");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "99")
    {
      str_ErrorHeader = StrConcat2(Translate("Pipetting Head error"), Translate(" :: "));
      str_ErrorDescription = Translate("Pipetting Head error");
      str_ErrorCause = Translate("Return message of the command CH includes a Pipetting Head error");
    }
    if (str_ErrorCause == "")
    {
      o_str_ErrorDescription = StrConcat4(str_ErrorHeader, str_ErrorDescription, Translate(""), Translate(""));
    }
    else
    {
      o_str_ErrorDescription = StrConcat4(str_ErrorHeader, str_ErrorDescription, Translate(" :: "), str_ErrorCause);
    }
  }

  function GetSlaveError( variable i_str_ReturnValue, variable & o_arr_Channels[], variable & o_arr_SlaveErrors[], variable & o_arr_ErrorDescription[] ) void {
    private variable str_ErrorDescription;
    private variable i;
    private variable str_ChannelError;
    private variable int_SplitValues;
    private variable bln_UseSlaveError;
    private variable str_ChannelNumber;
    private variable str_Value;
    private variable arr_ChannelErrors[];
    private variable arr_Values[];
    o_arr_Channels.SetSize( 0);
    o_arr_SlaveErrors.SetSize( 0);
    o_arr_ErrorDescription.SetSize( 0);
    o_arr_Channels.SetSize(0);
    o_arr_SlaveErrors.SetSize(0);
    o_arr_ErrorDescription.SetSize(0);
    arr_Values = HSLExtensions::String::Split(i_str_ReturnValue, Translate(" "), 1);
    int_SplitValues=arr_Values.GetSize();
    if (int_SplitValues < 1)
    {
      return;
    }
    {
      for(i = 0; i < int_SplitValues;)
      {
        i = i + 1;
        if (i > 1)
        {
          str_Value=arr_Values.GetAt(i-1);
          arr_ChannelErrors = HSLExtensions::String::Split(str_Value, Translate("/"), 1);
          str_ChannelNumber=arr_ChannelErrors.GetAt(1-1);
          str_ChannelNumber = StrLeft(str_ChannelNumber, 2);
          str_ChannelNumber = StrRight(str_ChannelNumber, 1);
          GetChannelNumber(str_ChannelNumber);
          o_arr_Channels.AddAsLast(str_ChannelNumber);
          str_ChannelError=arr_ChannelErrors.GetAt(2-1);
          str_ChannelError = StrRight(str_ChannelError, 2);
          bln_UseSlaveError = 0;
          if (str_ChannelError == "00")
          {
            str_ChannelError=arr_ChannelErrors.GetAt(1-1);
            str_ChannelError = StrRight(str_ChannelError, 2);
            bln_UseSlaveError = 1;
          }
          o_arr_SlaveErrors.AddAsLast(str_ChannelError);
          if (bln_UseSlaveError == 0)
          {
            GetErrorDescriptionSlaveError(str_ChannelError, str_ErrorDescription);
          }
          else
          {
            GetErrorDescriptionMainError(str_ChannelError, str_ErrorDescription);
          }
          o_arr_ErrorDescription.AddAsLast(str_ErrorDescription);
        }
      }
    }
    Util2::Debug::TraceArray_3(Translate("Channel Number                  Slave Error                  Description"), o_arr_Channels, o_arr_SlaveErrors, o_arr_ErrorDescription);
  }

  function Parse_Parameter_Multiple( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable i_int_MaxValues, variable & o_bol_ParameterFound, variable & o_arr_flt_Value[] ) void {
    private variable str_Value3;
    private variable int_Remaining;
    private variable str_RegionOfInterest;
    private variable int_ValueNumber;
    private variable int_LoopCount;
    private variable int_StringPosition;
    private variable flt_Value2;
    private variable int_ParamaterLength;
    private variable o_flt_Value;
    private variable int_ChannelCount;
    private variable int_SecondCut;
    private variable int_Count;
    private variable str_Value2;
    private variable int_Value2;
    private variable str_Value;
    o_bol_ParameterFound = 0;
    o_arr_flt_Value.SetSize( 0);
    o_arr_flt_Value.SetSize(0);
    o_bol_ParameterFound = StrReplace(i_str_ParameterFull, i_str_Parameter, i_str_Parameter);
    int_ParamaterLength = StrGetLength(i_str_ParameterFull);
    if (o_bol_ParameterFound == 1)
    {
      int_StringPosition = StrFind(i_str_ParameterFull, i_str_Parameter);
      int_StringPosition = int_StringPosition + 1;
      int_Remaining = int_ParamaterLength - int_StringPosition;
      str_RegionOfInterest = StrMid(i_str_ParameterFull, int_StringPosition, int_Remaining);
      int_ValueNumber = i_int_TotalDigits + 1;
      int_SecondCut = i_int_TotalDigits;
      int_Count = 1;
      {
        int_LoopCount = 0;
        while (1 == 1)
        {
          int_LoopCount = int_LoopCount + 1;
          int_ChannelCount = int_ChannelCount + 1;
          str_Value = StrMid(str_RegionOfInterest, int_Count, int_ValueNumber);
          int_Count = int_Count + int_ValueNumber;
          str_Value2 = StrLeft(str_Value, int_SecondCut);
          int_Value2 = StrIVal(str_Value2);
          flt_Value2 = int_Value2 * i_flt_Conversion;
          o_flt_Value = flt_Value2;
          o_arr_flt_Value.AddAsLast(o_flt_Value);
          str_Value3 = StrRight(str_Value, 1);
          if (str_Value3 != " ")
          {
            if (str_Value3 == "&")
            {
              {
                while (int_ChannelCount < i_int_MaxValues)
                {
                  int_ChannelCount = int_ChannelCount + 1;
                  o_arr_flt_Value.AddAsLast(o_flt_Value);
                }
              }
            }
            break;
          }
        }
      }
    }
  }

  function Parse_Parameter_Single( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable & o_bol_ParameterFound, variable & o_flt_Value ) void {
    private variable str_Value3;
    private variable int_Remaining;
    private variable str_RegionOfInterest;
    private variable int_ValueNumber;
    private variable int_LoopCount;
    private variable int_StringPosition;
    private variable flt_Value2;
    private variable int_ParamaterLength;
    private variable int_SecondCut;
    private variable int_Count;
    private variable str_Value;
    private variable int_Value2;
    private variable str_Value2;
    o_bol_ParameterFound = 0;
    o_flt_Value = 0;
    o_flt_Value = 0.0;
    o_bol_ParameterFound = StrReplace(i_str_ParameterFull, i_str_Parameter, i_str_Parameter);
    StrReplace(i_str_ParameterFull, Translate("+"), Translate(""));
    int_ParamaterLength = StrGetLength(i_str_ParameterFull);
    if (o_bol_ParameterFound == 1)
    {
      int_StringPosition = StrFind(i_str_ParameterFull, i_str_Parameter);
      int_StringPosition = int_StringPosition + 1;
      int_Remaining = int_ParamaterLength - int_StringPosition;
      str_RegionOfInterest = StrMid(i_str_ParameterFull, int_StringPosition, int_Remaining);
      int_ValueNumber = i_int_TotalDigits + 1;
      int_SecondCut = i_int_TotalDigits;
      int_Count = 1;
      {
        int_LoopCount = 0;
        while (1 == 1)
        {
          int_LoopCount = int_LoopCount + 1;
          str_Value = StrMid(str_RegionOfInterest, int_Count, int_ValueNumber);
          int_Count = int_Count + int_ValueNumber;
          str_Value2 = StrLeft(str_Value, int_SecondCut);
          int_Value2 = StrIVal(str_Value2);
          flt_Value2 = int_Value2 * i_flt_Conversion;
          o_flt_Value = flt_Value2;
          str_Value3 = StrRight(str_Value, 1);
          if (str_Value3 != " ")
          {
            break;
          }
        }
      }
    }
  }

  function CheckForError( variable i_str_FunctionName, variable i_str_ReturnValue, variable i_bool_RaiseError ) void {
    private variable bool_ParamFound;
    private variable str_ErrorReturn;
    private variable int_MainErrorCode;
    private variable i;
    private variable str_MainError;
    private variable str_MainErrorCode;
    private variable str_ErrorRaise;
    private variable str_SlaveError;
    private variable int_TotalErrors;
    private variable int_ErrorCode;
    private variable str_SlaveErrorCode;
    private variable bool_SimMode;
    private variable arr_ErrorDescription[];
    private variable arr_Channels[];
    private variable arr_SlaveErrors[];
    bool_SimMode = Util::GetSimulationMode();
    Parse_Parameter_Single_String(i_str_ReturnValue, Translate("er"), bool_ParamFound, str_ErrorReturn);
    if (bool_ParamFound == 0)
    {
      return;
    }
    if (bool_SimMode == 1)
    {
      i_bool_RaiseError = 0;
    }
    str_ErrorReturn = StrLeft(str_ErrorReturn, 5);
    str_MainErrorCode = StrLeft(str_ErrorReturn, 2);
    str_SlaveErrorCode = StrRight(str_ErrorReturn, 2);
    if (str_MainErrorCode == "00")
    {
      return;
    }
    str_MainErrorCode = StrTrimRight(str_MainErrorCode, Translate(" "));
    int_MainErrorCode = StrIVal(str_MainErrorCode);
    str_MainErrorCode = StrConcat2(int_MainErrorCode, Translate(""));
    if (str_MainErrorCode == "0")
    {
      return;
    }
    GetErrorDescriptionMainError(str_MainErrorCode, str_MainError);
    str_SlaveErrorCode = Translate("");
    str_SlaveError = Translate("");
    if (str_MainErrorCode == "99")
    {
      GetSlaveError(i_str_ReturnValue, arr_Channels, arr_SlaveErrors, arr_ErrorDescription);
      int_TotalErrors=arr_Channels.GetSize();
      {
        for(i = 0; i < int_TotalErrors;)
        {
          i = i + 1;
          if (i == 1)
          {
            str_SlaveErrorCode = StrConcat4(str_SlaveErrorCode, Translate("; "), Translate(""), Translate(""));
          }
          str_SlaveErrorCode = StrConcat4(str_SlaveErrorCode, arr_Channels.ElementAt( i -1), Translate(" "), arr_SlaveErrors.ElementAt( i -1));
          str_SlaveErrorCode = StrConcat2(str_SlaveErrorCode, Translate("  "));
          str_SlaveError = StrConcat4(str_SlaveError, arr_Channels.ElementAt( i -1), Translate(" "), arr_ErrorDescription.ElementAt( i -1));
          str_SlaveError = StrConcat2(str_SlaveError, Translate("  "));
        }
      }
    }
    Trace("Main Error Code:  ",str_MainErrorCode,"  Main Error Description:  ",str_MainError);
    Trace("Slave Error Code:  ",str_SlaveErrorCode,"  Slave Error Description:  ",str_SlaveError);
    if (i_bool_RaiseError == 1)
    {
      str_ErrorRaise = StrConcat12(i_str_FunctionName, Translate(" :: "), Translate("Error while running function"), Translate("\n\n"), str_SlaveErrorCode, Translate(" - "), str_SlaveError, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      int_ErrorCode = StrIVal(str_SlaveErrorCode);
      ErrRaise(int_ErrorCode, str_ErrorRaise);
    }
  }

  function GetChannelNumber( variable & io_int_ChannelNumber ) void {
    io_int_ChannelNumber = StrConcat2(io_int_ChannelNumber, Translate(""));
    if (io_int_ChannelNumber == "10")
    {
      io_int_ChannelNumber = Translate("A");
      return;
    }
    if (io_int_ChannelNumber == "11")
    {
      io_int_ChannelNumber = Translate("B");
      return;
    }
    if (io_int_ChannelNumber == "12")
    {
      io_int_ChannelNumber = Translate("C");
      return;
    }
    if (io_int_ChannelNumber == "13")
    {
      io_int_ChannelNumber = Translate("D");
      return;
    }
    if (io_int_ChannelNumber == "14")
    {
      io_int_ChannelNumber = Translate("E");
      return;
    }
    if (io_int_ChannelNumber == "15")
    {
      io_int_ChannelNumber = Translate("F");
      return;
    }
    if (io_int_ChannelNumber == "16")
    {
      io_int_ChannelNumber = Translate("G");
      return;
    }
    if (io_int_ChannelNumber == "A")
    {
      io_int_ChannelNumber = Translate("10");
      return;
    }
    if (io_int_ChannelNumber == "B")
    {
      io_int_ChannelNumber = Translate("11");
      return;
    }
    if (io_int_ChannelNumber == "C")
    {
      io_int_ChannelNumber = Translate("12");
      return;
    }
    if (io_int_ChannelNumber == "D")
    {
      io_int_ChannelNumber = Translate("13");
      return;
    }
    if (io_int_ChannelNumber == "E")
    {
      io_int_ChannelNumber = Translate("14");
      return;
    }
    if (io_int_ChannelNumber == "F")
    {
      io_int_ChannelNumber = Translate("15");
      return;
    }
    if (io_int_ChannelNumber == "G")
    {
      io_int_ChannelNumber = Translate("16");
      return;
    }
  }

  function Parse_Parameter_Single_String( variable i_str_ParameterFull, variable i_str_Parameter, variable & o_bol_ParameterFound, variable & o_str_Value ) void {
    private variable str_Value3;
    private variable int_Remaining;
    private variable str_RegionOfInterest;
    private variable int_ValueNumber;
    private variable int_LoopCount;
    private variable int_StringPosition;
    private variable int_ParamaterLength;
    private variable int_SecondCut;
    private variable int_Count;
    private variable str_Value2;
    private variable str_Value;
    o_bol_ParameterFound = 0;
    o_str_Value = 0;
    o_str_Value = Translate("");
    o_bol_ParameterFound = StrReplace(i_str_ParameterFull, i_str_Parameter, i_str_Parameter);
    int_ParamaterLength = StrGetLength(i_str_ParameterFull);
    if (o_bol_ParameterFound == 1)
    {
      int_StringPosition = StrFind(i_str_ParameterFull, i_str_Parameter);
      int_StringPosition = int_StringPosition + 1;
      int_Remaining = int_ParamaterLength - int_StringPosition;
      str_RegionOfInterest = StrMid(i_str_ParameterFull, int_StringPosition, int_Remaining);
      int_ValueNumber = int_Remaining + 1;
      int_SecondCut = int_Remaining;
      int_Count = 1;
      {
        int_LoopCount = 0;
        while (1 == 1)
        {
          int_LoopCount = int_LoopCount + 1;
          str_Value = StrMid(str_RegionOfInterest, int_Count, int_ValueNumber);
          int_Count = int_Count + int_ValueNumber;
          str_Value2 = StrLeft(str_Value, int_SecondCut);
          o_str_Value = str_Value2;
          str_Value3 = StrRight(str_Value, 1);
          if (str_Value3 != " ")
          {
            break;
          }
        }
      }
    }
  }

  function SetParameter( variable i_strParameterName, variable i_fltValue, variable i_fltConversionValue, variable i_intTotalDigits, variable & o_strParameter ) void {
    private variable flt_Value;
    private variable int_Value;
    private variable str_Value;
    o_strParameter = 0;
    if(0){
      TRACE::TRACE12(Translate("     Param name:  "), i_strParameterName, Translate("   Value:  "), i_fltValue, Translate("     Total Digits:  "), i_intTotalDigits, Translate("     Conversion:  "), i_fltConversionValue, Translate(""), Translate(""), Translate(""), Translate(""));
    }
    str_Value = StrConcat2(i_strParameterName, Translate(""));
    flt_Value = i_fltValue * i_fltConversionValue;
    int_Value = MthRound(flt_Value, 0);
    int_Value = StrConcat2(int_Value, Translate(""));
    int_Value = StrFillLeft(int_Value, Translate("0"), i_intTotalDigits);
    o_strParameter = StrConcat2(str_Value, int_Value);
  }

  function RemoveExcessDigits( variable & io_flt_Value ) void {
    private variable int_Check;
    io_flt_Value = MthRound(io_flt_Value, 1);
    io_flt_Value = StrConcat2(io_flt_Value, Translate(""));
    io_flt_Value = StrTrimRight(io_flt_Value, Translate("0"));
    int_Check = StrRight(io_flt_Value, 1);
    if (int_Check == ".")
    {
      StrReplace(io_flt_Value, Translate("."), Translate(".0"));
    }
    io_flt_Value = StrFVal(io_flt_Value);
  }

  function Parse_Parameter_Multiple2( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable & o_bol_ParameterFound, variable & o_arr_flt_Value[] ) void {
    private variable int_TotalParsed;
    private variable i;
    private variable str_ParseValue;
    private variable str_CurrentValue;
    private variable int_StringPosition;
    private variable flt_Value2;
    private variable int_ParamaterLength;
    private variable o_flt_Value;
    private variable int_CutAmount;
    private variable int_Value2;
    private variable arr_ParsedValues[];
    o_bol_ParameterFound = 0;
    o_arr_flt_Value.SetSize( 0);
    o_arr_flt_Value.SetSize(0);
    o_bol_ParameterFound = StrReplace(i_str_ParameterFull, i_str_Parameter, i_str_Parameter);
    int_ParamaterLength = StrGetLength(i_str_ParameterFull);
    if (o_bol_ParameterFound == 1)
    {
      int_StringPosition = StrFind(i_str_ParameterFull, i_str_Parameter);
      int_CutAmount = int_ParamaterLength - int_StringPosition;
      str_ParseValue = StrMid(i_str_ParameterFull, int_StringPosition, int_CutAmount);
      StrReplace(str_ParseValue, i_str_Parameter, Translate(""));
      TRACE::TRACE02(Translate("Parsed String:  "), str_ParseValue);
      arr_ParsedValues = HSLExtensions::String::Split(str_ParseValue, Translate(" "), BOOLEON::TRUE);
      int_TotalParsed=arr_ParsedValues.GetSize();
      {
        for(i = 0; i < int_TotalParsed;)
        {
          i = i + 1;
          str_CurrentValue=arr_ParsedValues.GetAt(i-1);
          int_Value2 = StrIVal(str_CurrentValue);
          flt_Value2 = int_Value2 * i_flt_Conversion;
          o_flt_Value = flt_Value2;
          o_arr_flt_Value.AddAsLast(o_flt_Value);
        }
      }
    }
  }

  function GetChannelValue( variable i_int_ChannelNumber, variable & o_str_ChannelValue ) void {
    o_str_ChannelValue = 0;
    o_str_ChannelValue = Translate("");
    if (i_int_ChannelNumber == 1)
    {
      o_str_ChannelValue = Translate("1");
    }
    if (i_int_ChannelNumber == 2)
    {
      o_str_ChannelValue = Translate("2");
    }
    if (i_int_ChannelNumber == 3)
    {
      o_str_ChannelValue = Translate("3");
    }
    if (i_int_ChannelNumber == 4)
    {
      o_str_ChannelValue = Translate("4");
    }
    if (i_int_ChannelNumber == 5)
    {
      o_str_ChannelValue = Translate("5");
    }
    if (i_int_ChannelNumber == 6)
    {
      o_str_ChannelValue = Translate("6");
    }
    if (i_int_ChannelNumber == 7)
    {
      o_str_ChannelValue = Translate("7");
    }
    if (i_int_ChannelNumber == 8)
    {
      o_str_ChannelValue = Translate("8");
    }
    if (i_int_ChannelNumber == 9)
    {
      o_str_ChannelValue = Translate("9");
    }
    if (i_int_ChannelNumber == 10)
    {
      o_str_ChannelValue = Translate("A");
    }
    if (i_int_ChannelNumber == 11)
    {
      o_str_ChannelValue = Translate("B");
    }
    if (i_int_ChannelNumber == 12)
    {
      o_str_ChannelValue = Translate("C");
    }
    if (i_int_ChannelNumber == 13)
    {
      o_str_ChannelValue = Translate("D");
    }
    if (i_int_ChannelNumber == 14)
    {
      o_str_ChannelValue = Translate("E");
    }
    if (i_int_ChannelNumber == 15)
    {
      o_str_ChannelValue = Translate("F");
    }
    if (i_int_ChannelNumber == 16)
    {
      o_str_ChannelValue = Translate("G");
    }
  }

  function Get_Instrument_Type( device & ML_STAR, variable & o_int_InstrumentType, variable & o_int_MaxAutoloadTracks ) variable {
    private variable bool_ParamFound;
    private variable str_ReturnValue;
    private variable bln_VStarExists;
    private variable str_ConfigFile;
    private variable int_NumberOfTracks;
    private variable str_NumberOfTracksAutoload;
    private variable ret_int_FirmwareType;
    private variable str_ConfigFolderPath;
    private variable str_NumberOfTracks;
    o_int_InstrumentType = 0;
    o_int_MaxAutoloadTracks = 0;
    ret_int_FirmwareType = 0;
    o_int_InstrumentType = -1;
    str_ConfigFolderPath = FilGetConfigPath();
    str_ConfigFile = StrConcat4(str_ConfigFolderPath, Translate("\\"), Translate("VStar.cfg"), Translate(""));
    bln_VStarExists = HSLExtensions::File::Exists(str_ConfigFile);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("xt"), 1.0, 2, bool_ParamFound, int_NumberOfTracks);
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("xa"), 1.0, 2, bool_ParamFound, o_int_MaxAutoloadTracks);
    if(0){
      int_NumberOfTracks = StrIVal(str_NumberOfTracks);
      o_int_MaxAutoloadTracks = StrIVal(str_NumberOfTracksAutoload);
    }
    if (bln_VStarExists == BOOLEON::FALSE)
    {
      ret_int_FirmwareType = 1;
      if (int_NumberOfTracks == 30)
      {
        o_int_InstrumentType = 1;
      }
      if (int_NumberOfTracks == 54)
      {
        o_int_InstrumentType = 0;
      }
      if (int_NumberOfTracks == 76)
      {
        o_int_InstrumentType = 2;
      }
    }
    else
    {
      ret_int_FirmwareType = 2;
      if (int_NumberOfTracks == 54)
      {
        o_int_InstrumentType = 4;
      }
      if (int_NumberOfTracks == 84)
      {
        o_int_InstrumentType = 3;
      }
    }
    return (ret_int_FirmwareType);
  }

  function InitFunction( device & ML_STAR ) void {
    private variable int_NotUsed;
    private variable flt_NotUsed;
    if (G_FW_PIP_COM_LibraryInitialized == BOOLEON::FALSE)
    {
      G_FW_PIP_COM_SimulationMode = Util::GetSimulationMode();
      G_FW_PIP_COM_FirmwareType = Get_Instrument_Type(ML_STAR, G_FW_PIP_COM_InstrumentType, int_NotUsed);
      G_FW_PIP_COM_LibraryInitialized = BOOLEON::TRUE;
      if (G_FW_PIP_COM_InstrumentType <= 2)
      {
        Get_X_Ranges_STAR(ML_STAR, G_FW_PIP_COM_XArmMin, G_FW_PIP_COM_XArmMax, flt_NotUsed, flt_NotUsed);
      }
      else
      {
      }
      G_FW_PIP_COM_TotalChannels = HELPERLIBRARY::GetChannelLimits(ML_STAR, 0, G_ARR_FW_PIP_COM_YMax, G_ARR_FW_PIP_COM_YMin, G_FW_PIP_COM_Raster);
      G_FW_XL_COM_TotalChannels = HELPERLIBRARY::GetChannelLimits(ML_STAR, 1, G_ARR_FW_XL_COM_YMax, G_ARR_FW_XL_COM_YMin, G_FW_XL_COM_Raster);
      G_FW_PIP_COM_MPH_Exist = DevGetCfgValueWithKey(ML_STAR, 24);
    }
  }

  function SetParametersAll( variable i_strParameterName, variable i_fltValue, variable i_fltConversionValue, variable i_intTotalDigits, variable & o_strParameter ) void {
    private variable flt_Value;
    private variable int_Value;
    o_strParameter = 0;
    o_strParameter = Translate("");
    o_strParameter = StrConcat2(i_strParameterName, Translate(""));
    flt_Value = i_fltValue * i_fltConversionValue;
    int_Value = MthRound(flt_Value, 0);
    int_Value = StrConcat2(int_Value, Translate(""));
    int_Value = StrFillLeft(int_Value, Translate("0"), i_intTotalDigits);
    o_strParameter = StrConcat2(o_strParameter, int_Value);
    o_strParameter = StrConcat2(o_strParameter, Translate("&"));
  }

  function SetParametersArr( variable i_strParameterName, variable & i_arrValues[], variable i_fltConversionValue, variable i_intTotalDigits, variable i_intTotalChannels, variable & o_strParameter ) void {
    private variable i;
    private variable flt_Value;
    private variable int_Value;
    o_strParameter = 0;
    o_strParameter = Translate("");
    o_strParameter = StrConcat2(i_strParameterName, Translate(""));
    {
      for(i = 0; i < i_intTotalChannels;)
      {
        i = i + 1;
        flt_Value = i_arrValues.ElementAt( i -1) * i_fltConversionValue;
        int_Value = MthRound(flt_Value, 0);
        int_Value = StrConcat2(int_Value, Translate(""));
        int_Value = StrFillLeft(int_Value, Translate("0"), i_intTotalDigits);
        o_strParameter = StrConcat2(o_strParameter, int_Value);
        if (i != i_intTotalChannels)
        {
          o_strParameter = StrConcat2(o_strParameter, Translate(" "));
        }
      }
    }
  }

  function Get_X_Ranges_STAR( device & ML_STAR, variable & o_flt_LeftXMin, variable & o_flt_LeftXMax, variable & o_flt_RightXMin, variable & o_flt_RightXMax ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParamFound;
    private variable i;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable bol_SimulationMode;
    private variable int_Count;
    private variable int_Values;
    private variable arr_Values[];
    o_flt_LeftXMin = 0;
    o_flt_LeftXMax = 0;
    o_flt_RightXMin = 0;
    o_flt_RightXMax = 0;
    o_flt_LeftXMax = 0.0;
    o_flt_LeftXMin = 0.0;
    o_flt_RightXMax = 0.0;
    o_flt_RightXMin = 0.0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    bol_SimulationMode = Util::GetSimulationMode();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    CheckForError(strFunctionName, str_ReturnValue, BOOLEON::TRUE);
    Parse_Parameter_Multiple(str_ReturnValue, Translate("ru"), 0.1, 5, 4, bol_ParamFound, arr_Values);
    if (bol_ParamFound == 1)
    {
      int_Values=arr_Values.GetSize();
      {
        for(i = 0; i < int_Values;)
        {
          i = i + 1;
          if (i == 1)
          {
            o_flt_LeftXMin=arr_Values.GetAt(1-1);
          }
          if (i == 2)
          {
            o_flt_LeftXMax=arr_Values.GetAt(2-1);
          }
          if (i == 3)
          {
            o_flt_RightXMin=arr_Values.GetAt(3-1);
          }
          if (i == 4)
          {
            o_flt_RightXMax=arr_Values.GetAt(4-1);
          }
        }
      }
    }
  }
} // library namespace
