#pragma once
#include "HSLStrLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLFilLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLUtilLib.hsl"
#include "STAR Tools\\Resources\\SubMethods\\HelperLibrary.hs_"
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace LIQUID_LEVEL_CHECK {
  function FindLiquidHeight( device & ML_STAR, variable i_str_LiquidLevelReturn, sequence i_seq_Labware, variable i_int_Channel, variable & o_flt_LiquidHeight ) void ;
  function MeasureLiquidLevel_Multi( device & ML_STAR, sequence & i_arrseq_FullReservoirSequences[], sequence & i_seq_TipsToUse, sequence i_seq_TipWaste, variable i_str_TipCounter, variable i_int_LLD_Sensitivity, variable i_bool_ConvertTouL, variable & o_arr_VolumesMeasured[] ) variable ;
  function MeasureLiquidLevel_Single( device & ML_STAR, sequence i_seq_FullReservoirSequence, sequence & i_seq_TipsToUse, sequence i_seq_TipWaste, variable i_str_TipCounter, variable i_bool_IncrementTipSequence, variable i_int_LLD_Sensitivity, variable i_bool_ConvertTouL, variable & o_flt_VolumeMeasured ) variable ;
  private function _Get_CenterWell( device & ML_STAR, sequence i_seq_Reservoir, variable & o_str_WellID ) void ;
  private function _Get_LiquidClass( variable i_int_TipType, variable & o_str_LiquidClass ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    HELPERLIBRARY::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    HELPERLIBRARY::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
  }

  function MeasureLiquidLevel_Single( device & ML_STAR, sequence i_seq_FullReservoirSequence, sequence & i_seq_TipsToUse, sequence i_seq_TipWaste, variable i_str_TipCounter, variable i_bool_IncrementTipSequence, variable i_int_LLD_Sensitivity, variable i_bool_ConvertTouL, variable & o_flt_VolumeMeasured ) variable {
    private variable str_FunctionName;
    private variable str_TipCounter;
    private variable int_Total1mLChannels;
    private variable ret_FunctionSuccessful;
    private variable str_TipName;
    private variable str_TipLabID;
    private variable int_Length;
    private variable str_WasteLabID;
    private variable int_Value;
    private variable str_Value;
    private variable str_ReservoirLabID;
    private variable int_TotalPositions;
    private variable int_TipType;
    private variable str_LiquidClass;
    private variable str_ChannelPattern;
    private variable str_CenterWell;
    private sequence seq_LLCheck;
    private variable str_IncrementSequence;
    private variable int_IncrementSequence;
    private variable flt_VolumeMeasureduL;
    private variable flt_VolumeMeasuredmL;
    private variable flt_LiquidLevel;
    private variable str_ReturnValue;
    private variable flt_VolumeMeasured;
    private variable str_LabID;
    private variable int_LLD_Sensitivity;
    private variable str_PosID;
    private variable bool_ConnectedContainer;
    o_flt_VolumeMeasured = 0;
    ret_FunctionSuccessful = 0;
    o_flt_VolumeMeasured = 0.0;
    str_FunctionName = Translate("");
    SeqRemoveAll(seq_LLCheck);
    int_Total1mLChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    Trace("     ","Total Channels:  ",int_Total1mLChannels);
    if (int_Total1mLChannels == 0)
    {
      MECC::TraceComment(Translate("=========================================\n\nNO 1mL CHANNELS ARE LOADED ON THE SYSTEM!\n\n========================================="));
      Trace("----------------------------------- ",str_FunctionName," - FINISH");
      return (ret_FunctionSuccessful);
    }
    str_ChannelPattern = Translate("1");
    str_ChannelPattern = StrFillRight(str_ChannelPattern, Translate("0"), int_Total1mLChannels);
    Trace("     ","Channel Pattern:  ",str_ChannelPattern);
    str_TipLabID = SeqGetLabwareId(i_seq_TipsToUse);
    int_Length = StrGetLength(str_TipLabID);
    if (int_Length > 0)
    {
      HELPERLIBRARY::GetTipName(ML_STAR, str_TipLabID, str_TipName, int_TipType);
    }
    else
    {
      int_TipType = Translate("UNKNOWN");
    }
    str_TipCounter = StrConcat2(i_str_TipCounter, Translate(""));
    if (str_TipCounter == "0")
    {
      str_TipCounter = Translate("");
    }
    if (str_TipCounter == "")
    {
      str_TipCounter = StrConcat4(Translate("Tip_Counter"), Translate("_"), int_TipType, Translate(""));
    }
    Trace("     ","Tip Counter:  ",str_TipCounter);
    if(0){
      HELPERLIBRARY::TipCheck(ML_STAR, i_seq_TipsToUse, str_TipCounter, 1);
    }
    STAR_TIP_TOOLS::TipCheck(ML_STAR, i_seq_TipsToUse, str_TipCounter, 1);
    str_TipLabID = SeqGetLabwareId(i_seq_TipsToUse);
    HELPERLIBRARY::GetTipName(ML_STAR, str_TipLabID, str_TipName, int_TipType);
    str_IncrementSequence = StrConcat2(i_bool_IncrementTipSequence, Translate(""));
    int_IncrementSequence = StrIVal(str_IncrementSequence);
    if (int_IncrementSequence > 1)
    {
      int_IncrementSequence = 1;
    }
    if (int_IncrementSequence < 0)
    {
      int_IncrementSequence = 0;
    }
    Trace("     ","Tip Labware:  ",str_TipLabID);
    Trace("     ","Tip Name:  ",str_TipName);
    Trace("     ","Tip Type:  ",int_TipType);
    Trace("     ","Increment Sequence:  ",int_IncrementSequence);
    if (str_TipName == "")
    {
      MECC::TraceComment(Translate("=========================================\n\nTIP SEQUENCE DOES NOT POINT TO A TIP LABWARE!\n\n========================================="));
      Trace("----------------------------------- ",str_FunctionName," - FINISH");
      return (ret_FunctionSuccessful);
    }
    _Get_LiquidClass(int_TipType, str_LiquidClass);
    Trace("     ","Liquid Class:  ",str_LiquidClass);
    if (str_LiquidClass == "")
    {
      MECC::TraceComment(Translate("=========================================\n\nTIP TYPE IS NOT SUPPORTED IN THIS FUNCTION!\n\n========================================="));
      Trace("----------------------------------- ",str_FunctionName," - FINISH");
      return (ret_FunctionSuccessful);
    }
    str_WasteLabID = SeqGetLabwareId(i_seq_TipWaste);
    int_Length = StrGetLength(str_WasteLabID);
    if (int_Length == 0)
    {
      int_Value = 0;
    }
    else
    {
      str_Value = DevGetLabwareData(ML_STAR, str_WasteLabID, Translate("MlStarIsWasteRack"));
      int_Length = StrGetLength(str_Value);
      if (int_Length == 0)
      {
        int_Value = 0;
      }
      else
      {
        int_Value = StrIVal(str_Value);
      }
    }
    Trace("     ","Waste Labware:  ",str_WasteLabID);
    if (int_Value == 0)
    {
      MECC::TraceComment(Translate("=========================================\n\nWASTE SEQUENCE DOES NOT POINT TO A TIP WASTE LABWARE!\n\n========================================="));
      Trace("----------------------------------- ",str_FunctionName," - FINISH");
      return (ret_FunctionSuccessful);
    }
    str_ReservoirLabID = SeqGetLabwareId(i_seq_FullReservoirSequence);
    int_Length = StrGetLength(str_ReservoirLabID);
    Trace("     ","Reservoir Labware:  ",str_ReservoirLabID);
    if (int_Length == 0)
    {
      MECC::TraceComment(Translate("=========================================\n\nLABWARE ID OF RESERVOIR SEQUENCE IS UNKNOWN!\n\n========================================="));
      Trace("----------------------------------- ",str_FunctionName," - FINISH");
      return (ret_FunctionSuccessful);
    }
    int_TotalPositions = SeqGetTotal(i_seq_FullReservoirSequence);
    Trace("     ","Reservoir Positions:  ",int_TotalPositions);
    _Get_CenterWell(ML_STAR, i_seq_FullReservoirSequence, str_CenterWell);
    Trace("     ","Reservoir Check Well:  ",str_CenterWell);
    int_LLD_Sensitivity = StrConcat2(i_int_LLD_Sensitivity, Translate(""));
    int_LLD_Sensitivity = StrIVal(int_LLD_Sensitivity);
    if (int_LLD_Sensitivity < 1)
    {
      int_LLD_Sensitivity = 1;
    }
    if (int_LLD_Sensitivity > 5)
    {
      int_LLD_Sensitivity = 5;
    }
    SeqAdd(seq_LLCheck, str_ReservoirLabID, str_CenterWell);
    seq_LLCheck.SetCurrentPosition(1);
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, i_seq_TipsToUse, str_TipCounter, str_ChannelPattern);
    if (str_TipLabID == str_WasteLabID)
    {
      SeqCopySequence(i_seq_TipWaste, i_seq_TipsToUse);
    }
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, i_seq_TipsToUse, str_TipCounter);
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
      	str_ReturnValue = arrRetValues[2];
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    FindLiquidHeight(ML_STAR, str_ReturnValue, seq_LLCheck, 1, flt_LiquidLevel);
    str_LabID = SeqGetLabwareId(seq_LLCheck);
    str_PosID = SeqGetPositionId(seq_LLCheck);
    SeqIncrement(seq_LLCheck, 1);
    HELPERLIBRARY::GetConnectedContainer(ML_STAR, str_LabID, bool_ConnectedContainer);
    flt_VolumeMeasuredmL = DevComputeContainerVolume(ML_STAR, str_LabID, str_PosID, flt_LiquidLevel, 0);
    if (i_bool_ConvertTouL == 1)
    {
      flt_VolumeMeasureduL = flt_VolumeMeasuredmL * 1000;
      if (bool_ConnectedContainer == 1)
      {
        flt_VolumeMeasured = flt_VolumeMeasureduL * int_TotalPositions;
      }
      else
      {
        flt_VolumeMeasured = flt_VolumeMeasureduL;
      }
    }
    else
    {
      if (bool_ConnectedContainer == 1)
      {
        flt_VolumeMeasured = flt_VolumeMeasuredmL * int_TotalPositions;
      }
      else
      {
        flt_VolumeMeasured = flt_VolumeMeasuredmL;
      }
    }
    o_flt_VolumeMeasured = MthRound(flt_VolumeMeasured, 1);
    if (o_flt_VolumeMeasured < 0.0)
    {
      o_flt_VolumeMeasured = 0.0;
    }
    if (i_bool_ConvertTouL == 1)
    {
      Trace("");
      Trace("     ","Volume Measured:  ",o_flt_VolumeMeasured," uL");
      Trace("");
    }
    else
    {
      Trace("");
      Trace("     ","Volume Measured:  ",o_flt_VolumeMeasured," mL");
      Trace("");
    }
    ret_FunctionSuccessful = 1;
    return (ret_FunctionSuccessful);
  }

  private function _Get_LiquidClass( variable i_int_TipType, variable & o_str_LiquidClass ) void {
    o_str_LiquidClass = 0;
    o_str_LiquidClass = Translate("");
    if (i_int_TipType == 0)
    {
      o_str_LiquidClass = Translate("LLD_Check_S");
    }
    if (i_int_TipType == 1)
    {
      o_str_LiquidClass = Translate("LLD_Check_SF");
    }
    if (i_int_TipType == 4)
    {
      o_str_LiquidClass = Translate("LLD_Check_H");
    }
    if (i_int_TipType == 5)
    {
      o_str_LiquidClass = Translate("LLD_Check_HF");
    }
    if (i_int_TipType == 22)
    {
      o_str_LiquidClass = Translate("LLD_Check_50uL");
    }
    if (i_int_TipType == 23)
    {
      o_str_LiquidClass = Translate("LLD_Check_50uLF");
    }
  }

  function MeasureLiquidLevel_Multi( device & ML_STAR, sequence & i_arrseq_FullReservoirSequences[], sequence & i_seq_TipsToUse, sequence i_seq_TipWaste, variable i_str_TipCounter, variable i_int_LLD_Sensitivity, variable i_bool_ConvertTouL, variable & o_arr_VolumesMeasured[] ) variable {
    private variable str_FunctionName;
    private variable ret_FunctionSuccessful;
    private sequence seq_LLCheck;
    private variable str_ChannelPattern;
    private variable int_Total1mLChannels;
    private variable str_LiquidClass;
    private variable int_TotalReservoirs;
    private variable int_TipType;
    private variable str_TipCounter;
    private variable str_TipLabID;
    private variable str_TipName;
    private variable int_Length;
    private variable str_WasteLabID;
    private variable int_Value;
    private variable str_Value;
    private variable i;
    private variable str_CenterWell;
    private variable str_ReservoirLabID;
    private variable int_TotalPositions;
    private sequence seq_CurrentReservoir;
    private variable int_RemainingReservoirs;
    private variable flt_VolumeMeasureduL;
    private variable flt_VolumeMeasured;
    private variable int_GetLLDCount;
    private variable flt_VolumeMeasuredmL;
    private variable int_ChanNumber;
    private variable int_ReservoirIndex;
    private variable arr_PositionsPerReservoir[];
    private variable str_ReturnValue;
    private variable flt_LiquidLevel;
    private variable str_LabID;
    private variable str_PosID;
    private variable bool_Simulation;
    private variable int_LLD_Sensitivity;
    private variable bool_ConnectedContainer;
    o_arr_VolumesMeasured.SetSize( 0);
    bool_Simulation = Util::GetSimulationMode();
    ret_FunctionSuccessful = 0;
    str_FunctionName = Translate("");
    SeqRemoveAll(seq_LLCheck);
    int_Total1mLChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    Trace("     ","Total Channels:  ",int_Total1mLChannels);
    if (int_Total1mLChannels == 0)
    {
      MECC::TraceComment(Translate("=========================================\n\nNO 1mL CHANNELS ARE LOADED ON THE SYSTEM!\n\n========================================="));
      Trace("----------------------------------- ",str_FunctionName," - FINISH");
      return (ret_FunctionSuccessful);
    }
    int_TotalReservoirs=i_arrseq_FullReservoirSequences.GetSize();
    Trace("     ","Total Reservoirs:  ",int_TotalReservoirs);
    if (int_TotalReservoirs == 0)
    {
      MECC::TraceComment(Translate("=========================================\n\nNO SEQUENCES WERE FOUND IN ARRAY!\n\n========================================="));
      Trace("----------------------------------- ",str_FunctionName," - FINISH");
      return (ret_FunctionSuccessful);
    }
    str_TipLabID = SeqGetLabwareId(i_seq_TipsToUse);
    int_Length = StrGetLength(str_TipLabID);
    if (int_Length > 0)
    {
      HELPERLIBRARY::GetTipName(ML_STAR, str_TipLabID, str_TipName, int_TipType);
    }
    else
    {
      int_TipType = Translate("UNKNOWN");
    }
    str_TipCounter = StrConcat2(i_str_TipCounter, Translate(""));
    if (str_TipCounter == "0")
    {
      str_TipCounter = Translate("");
    }
    if (str_TipCounter == "")
    {
      str_TipCounter = StrConcat4(Translate("Tip_Counter"), Translate("_"), int_TipType, Translate(""));
    }
    Trace("     ","Tip Counter:  ",str_TipCounter);
    if(0){
      HELPERLIBRARY::TipCheck(ML_STAR, i_seq_TipsToUse, str_TipCounter, int_TotalReservoirs);
    }
    STAR_TIP_TOOLS::TipCheck(ML_STAR, i_seq_TipsToUse, str_TipCounter, int_TotalReservoirs);
    str_TipLabID = SeqGetLabwareId(i_seq_TipsToUse);
    HELPERLIBRARY::GetTipName(ML_STAR, str_TipLabID, str_TipName, int_TipType);
    Trace("     ","Tip Labware:  ",str_TipLabID);
    Trace("     ","Tip Name:  ",str_TipName);
    Trace("     ","Tip Type:  ",int_TipType);
    if (str_TipName == "")
    {
      MECC::TraceComment(Translate("=========================================\n\nTIP SEQUENCE DOES NOT POINT TO A TIP LABWARE!\n\n========================================="));
      Trace("----------------------------------- ",str_FunctionName," - FINISH");
      return (ret_FunctionSuccessful);
    }
    _Get_LiquidClass(int_TipType, str_LiquidClass);
    Trace("     ","Liquid Class:  ",str_LiquidClass);
    if (str_LiquidClass == "")
    {
      MECC::TraceComment(Translate("=========================================\n\nTIP TYPE IS NOT SUPPORTED IN THIS FUNCTION!\n\n========================================="));
      Trace("----------------------------------- ",str_FunctionName," - FINISH");
      return (ret_FunctionSuccessful);
    }
    str_WasteLabID = SeqGetLabwareId(i_seq_TipWaste);
    int_Length = StrGetLength(str_WasteLabID);
    if (int_Length == 0)
    {
      int_Value = 0;
    }
    else
    {
      str_Value = DevGetLabwareData(ML_STAR, str_WasteLabID, Translate("MlStarIsWasteRack"));
      int_Length = StrGetLength(str_Value);
      if (int_Length == 0)
      {
        int_Value = 0;
      }
      else
      {
        int_Value = StrIVal(str_Value);
      }
    }
    Trace("     ","Waste Labware:  ",str_WasteLabID);
    if (int_Value == 0)
    {
      MECC::TraceComment(Translate("=========================================\n\nWASTE SEQUENCE DOES NOT POINT TO A TIP WASTE LABWARE!\n\n========================================="));
      Trace("----------------------------------- ",str_FunctionName," - FINISH");
      return (ret_FunctionSuccessful);
    }
    int_LLD_Sensitivity = StrConcat2(i_int_LLD_Sensitivity, Translate(""));
    int_LLD_Sensitivity = StrIVal(int_LLD_Sensitivity);
    if (int_LLD_Sensitivity < 1)
    {
      int_LLD_Sensitivity = 1;
    }
    if (int_LLD_Sensitivity > 5)
    {
      int_LLD_Sensitivity = 5;
    }
    arr_PositionsPerReservoir.SetSize(0);
    {
      for(i = 0; i < int_TotalReservoirs;)
      {
        i = i + 1;
        seq_CurrentReservoir=i_arrseq_FullReservoirSequences.GetAt(i-1);
        str_ReservoirLabID = SeqGetLabwareId(seq_CurrentReservoir);
        int_Length = StrGetLength(str_ReservoirLabID);
        Trace("     ","Reservoir Labware:  ",str_ReservoirLabID);
        if (int_Length == 0)
        {
          MECC::TraceComment(Translate("=========================================\n\nLABWARE ID OF RESERVOIR SEQUENCE IS UNKNOWN!\n\n========================================="));
          Trace("----------------------------------- ",str_FunctionName," - FINISH");
          return (ret_FunctionSuccessful);
        }
        int_TotalPositions = SeqGetTotal(seq_CurrentReservoir);
        arr_PositionsPerReservoir.AddAsLast(int_TotalPositions);
        Trace("     ","Reservoir Positions:  ",int_TotalPositions);
        _Get_CenterWell(ML_STAR, seq_CurrentReservoir, str_CenterWell);
        Trace("     ","Reservoir Check Well:  ",str_CenterWell);
        SeqAdd(seq_LLCheck, str_ReservoirLabID, str_CenterWell);
      }
    }
    seq_LLCheck.SetCurrentPosition(1);
    int_RemainingReservoirs = int_TotalReservoirs;
    int_ReservoirIndex = 1;
    Util2::Debug::TraceArray(Translate("Positions per reservoir"), arr_PositionsPerReservoir);
    {
      seq_LLCheck.SetCurrentPosition(1);
      while (
         (seq_LLCheck.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_LLCheck, 1);
        STAR_TIP_TOOLS::Optimized1mLTipPickup(ML_STAR, i_seq_TipsToUse, seq_LLCheck, str_TipCounter, str_ChannelPattern);
        if (str_TipLabID == str_WasteLabID)
        {
          SeqCopySequence(i_seq_TipWaste, i_seq_TipsToUse);
        }
        int_GetLLDCount = int_RemainingReservoirs;
        if (int_RemainingReservoirs > int_Total1mLChannels)
        {
          int_GetLLDCount = int_Total1mLChannels;
        }
        int_RemainingReservoirs = int_RemainingReservoirs - int_GetLLDCount;
        if(0){
          str_ChannelPattern = Translate("");
          str_ChannelPattern = StrFillLeft(str_ChannelPattern, Translate("1"), int_GetLLDCount);
          str_ChannelPattern = StrFillRight(str_ChannelPattern, Translate("0"), int_Total1mLChannels);
        }
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, i_seq_TipsToUse, str_TipCounter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	str_ReturnValue = arrRetValues[2];
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        {
          for(int_ChanNumber = 0; int_ChanNumber < int_GetLLDCount;)
          {
            int_ChanNumber = int_ChanNumber + 1;
            FindLiquidHeight(ML_STAR, str_ReturnValue, seq_LLCheck, int_ChanNumber, flt_LiquidLevel);
            str_LabID = SeqGetLabwareId(seq_LLCheck);
            str_PosID = SeqGetPositionId(seq_LLCheck);
            SeqIncrement(seq_LLCheck, 1);
            HELPERLIBRARY::GetConnectedContainer(ML_STAR, str_LabID, bool_ConnectedContainer);
            flt_VolumeMeasuredmL = DevComputeContainerVolume(ML_STAR, str_LabID, str_PosID, flt_LiquidLevel, 0);
            if (i_bool_ConvertTouL == 1)
            {
              flt_VolumeMeasureduL = flt_VolumeMeasuredmL * 1000;
              if (bool_ConnectedContainer == 1)
              {
                flt_VolumeMeasured = flt_VolumeMeasureduL * arr_PositionsPerReservoir.ElementAt( int_ReservoirIndex -1);
              }
              else
              {
                flt_VolumeMeasured = flt_VolumeMeasureduL;
              }
            }
            else
            {
              if (bool_ConnectedContainer == 1)
              {
                flt_VolumeMeasured = flt_VolumeMeasuredmL * arr_PositionsPerReservoir.ElementAt( int_ReservoirIndex -1);
              }
              else
              {
                flt_VolumeMeasured = flt_VolumeMeasuredmL;
              }
            }
            flt_VolumeMeasured = MthRound(flt_VolumeMeasured, 1);
            if (flt_VolumeMeasured < 0.0)
            {
              flt_VolumeMeasured = 0.0;
            }
            o_arr_VolumesMeasured.AddAsLast(flt_VolumeMeasured);
            int_ReservoirIndex = int_ReservoirIndex + 1;
            if (i_bool_ConvertTouL == 1)
            {
              Trace("");
              Trace("     ","Volume Measured:  ",flt_VolumeMeasured," uL");
              Trace("");
            }
            else
            {
              Trace("");
              Trace("     ","Volume Measured:  ",flt_VolumeMeasured," mL");
              Trace("");
            }
          }
        }
        if (
           (seq_LLCheck.GetCurrentPosition() > 0 && seq_LLCheck.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_LLCheck.SetMax(seq_LLCheck.GetTotal());
    }
    Util2::Debug::TraceArray(Translate("Liquid Level Measured per Reservoir"), o_arr_VolumesMeasured);
    ret_FunctionSuccessful = 1;
    return (ret_FunctionSuccessful);
  }

  private function _Get_CenterWell( device & ML_STAR, sequence i_seq_Reservoir, variable & o_str_WellID ) void {
    private variable flt_Sum_X;
    private variable flt_Sum_Y;
    private variable NotUsed;
    private variable flt_YCoord;
    private variable flt_XCoord;
    private variable str_TempSortingFile;
    private variable str_Well;
    private variable str_LogFolderPath;
    private variable int_PositionCount;
    private variable str_SQL_Sort;
    private variable flt_AvgX;
    private variable flt_AvgY;
    private variable int_Index;
    private variable int_TotalPositions;
    private file SortFile;
    private variable str_LabID;
    private variable bool_FileExists;
    o_str_WellID = 0;
    o_str_WellID = 0;
    str_LogFolderPath = FilGetLogFilesPath();
    str_TempSortingFile = StrConcat4(str_LogFolderPath, Translate("\\"), Translate("TEMP_SORTING"), Translate(".xls"));
    bool_FileExists = HSLExtensions::File::Exists(str_TempSortingFile);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(str_TempSortingFile);
    }
    SortFile.AddField("INDEX", int_Index, hslInteger);
    SortFile.AddField("WELL", str_Well, hslString, 255);
    SortFile.AddField("X", flt_XCoord, hslFloat);
    SortFile.AddField("Y", flt_YCoord, hslFloat);
    if( 0 == SortFile.Open(str_TempSortingFile + " " + "SORT", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TempSortingFile, "HxMetEdCompCmd");
    }
    int_TotalPositions = SeqGetTotal(i_seq_Reservoir);
    flt_Sum_X = 0.0;
    flt_Sum_Y = 0.0;
    int_PositionCount = 0;
    {
      for(int_Index = 0; int_Index < int_TotalPositions;)
      {
        int_Index = int_Index + 1;
        i_seq_Reservoir.SetCurrentPosition(int_Index);
        str_LabID = SeqGetLabwareId(i_seq_Reservoir);
        str_Well = SeqGetPositionId(i_seq_Reservoir);
        DevGetLabwarePositionEx(ML_STAR, str_LabID, str_Well, flt_XCoord, flt_YCoord, NotUsed, NotUsed);
        int_PositionCount = int_PositionCount + 1;
        flt_Sum_X = flt_Sum_X + flt_XCoord;
        flt_Sum_Y = flt_Sum_Y + flt_YCoord;
        if( 0 == SortFile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != SortFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    SortFile.RemoveFields();
    flt_AvgX = flt_Sum_X / (int_PositionCount * 1.0);
    flt_AvgY = flt_Sum_Y / (int_PositionCount * 1.0);
    str_SQL_Sort = StrConcat8(Translate("SELECT * FROM SORT WHERE X <= "), flt_AvgX, Translate(" AND Y >= "), flt_AvgY, Translate(" ORDER BY X DESC, Y ASC"), Translate(""), Translate(""), Translate(""));
    SortFile.AddField("INDEX", int_Index, hslInteger);
    SortFile.AddField("WELL", str_Well, hslString, 255);
    SortFile.AddField("X", flt_XCoord, hslFloat);
    SortFile.AddField("Y", flt_YCoord, hslFloat);
    if( 0 == SortFile.Open(str_TempSortingFile + " " + "SORT", hslRead, str_SQL_Sort) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TempSortingFile, "HxMetEdCompCmd");
    }
    if( 0 == SortFile.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != SortFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    SortFile.RemoveFields();
    o_str_WellID = str_Well;
    HSLExtensions::File::Delete(str_TempSortingFile);
  }

  function FindLiquidHeight( device & ML_STAR, variable i_str_LiquidLevelReturn, sequence i_seq_Labware, variable i_int_Channel, variable & o_flt_LiquidHeight ) void {
    private variable flt_LiquidLevelDeck;
    private variable flt_ZBottom;
    private variable NotUsed;
    private variable str_LabID;
    private variable bool_Simulation;
    o_flt_LiquidHeight = 0;
    bool_Simulation = Util::GetSimulationMode();
    str_LabID = SeqGetLabwareId(i_seq_Labware);
    flt_LiquidLevelDeck = StepReturn::GetLastLiquidLevel(i_int_Channel, i_str_LiquidLevelReturn);
    DevGetLabwarePosition(ML_STAR, str_LabID, NotUsed, NotUsed, flt_ZBottom, NotUsed);
    if (bool_Simulation == 1)
    {
      flt_LiquidLevelDeck = flt_ZBottom + 5.0;
    }
    o_flt_LiquidHeight = flt_LiquidLevelDeck - flt_ZBottom;
    if (o_flt_LiquidHeight < 0)
    {
      o_flt_LiquidHeight = 0;
    }
    if(0){
      Trace("******** Liquid Level Height for ",str_LabID," is ",o_flt_LiquidHeight);
    }
  }
} // library namespace
