#pragma once
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLFilLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLStrLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLUtilLib.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLExtensions\\Array.hsl"
#include "HSLMthLib.hsl"
#include "STAR Tools\\Resources\\SubMethods\\HelperLibrary.hs_"
#include "STAR Tools\\Resources\\SubMethods\\FW_HelperLibrary.hs_"
#include "STAR Tools\\Resources\\SubMethods\\STAR Channel Movement Tools.hs_"
#include "STAR Tools\\Resources\\SubMethods\\VANTAGE Channel Movement Tools.hs_"
#include "HSL_MethodHelper.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace PLATE_STACK_VERIFY {
  variable str_SortFile;
  function Get_Arr_StackSequences( device & ML_STAR, sequence i_seq_AllStacks, sequence & o_arr_StackSequences[] ) void ;
  function Plate_Stack_Verfy_V2( device & ML_STAR, sequence & i_arr_seq_PlateStacks[], variable & o_arr_PlateCounts[] ) void ;
  function Plate_Stack_Verify( device & ML_STAR, sequence & i_arr_seq_PlateStacks[], variable & o_arr_PlateCounts[] ) void ;
  function _ConvertChannelToAlpha( variable & i_int_ChanNum, variable & o_str_ChanNum ) void ;
  private function _Find_Stack_Heights( device & ML_STAR, variable & i_arr_StackLabIDs[] ) void ;
  private function _Find_Stack_Heights_V2( device & ML_STAR, variable & i_arr_StackLabIDs[], variable i_strChPattern, variable & i_arrXCoords[], variable & i_arrYCoords[], variable & i_arrZCoords[] ) void ;
  private function _RemoveSpots( device & ML_STAR, variable & i_arr_LabwareIDs[] ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    HELPERLIBRARY::_InitLibrary();
    FW_HELPERLIBRARY::_InitLibrary();
    STAR_CHANNEL_MOVEMENT_TOOLS::_InitLibrary();
    VANTAGE_CHANNEL_MOVEMENT_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    HELPERLIBRARY::_ExitLibrary();
    FW_HELPERLIBRARY::_ExitLibrary();
    STAR_CHANNEL_MOVEMENT_TOOLS::_ExitLibrary();
    VANTAGE_CHANNEL_MOVEMENT_TOOLS::_ExitLibrary();
  }

  function Plate_Stack_Verify( device & ML_STAR, sequence & i_arr_seq_PlateStacks[], variable & o_arr_PlateCounts[] ) void {
    private variable int_TotalStackNumber;
    private variable int_NumChannels;
    private variable str_LogFolderPath;
    private variable int_PlateCount;
    private variable flt_ZMin;
    private variable flt_ZMax;
    private variable int_MaxStack;
    private variable flt_XCenter;
    private variable str_Status;
    private variable flt_YCenter;
    private variable flt_ZStepSize;
    private variable int_Order;
    private variable str_PlateLabTop;
    private file file1;
    private variable NotUsed;
    private variable str_PlateLabBottom;
    private sequence seq_CurrentPlateStack;
    private variable arr_LabIDs[];
    private variable flt_ZDifference;
    private variable flt_ChanRaster;
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable str_CenterSpot;
    private variable str_LabID;
    private variable str_CenterSpotName;
    private variable int_NumNotDone;
    private variable flt_CurrentX;
    private variable str_SQL_Count;
    private variable int_ChannelCount;
    private variable int_ChannelStart;
    private file FileQuery;
    private variable flt_YMin;
    private variable flt_YMax;
    private variable int_ChannelYGood;
    private variable bol_ChannelYMinGood;
    private variable bol_ChannelYMaxGood;
    private variable arr_ChannelsUsed[];
    private variable int_ChIndex;
    private variable arr_ChannelY[];
    private variable int_ChanIndex;
    private variable int_ChannelsUsed;
    private variable flt_PreviousY;
    private variable int_ChannelsSet;
    private variable flt_ChannelY;
    private variable bol_ChannelStatus;
    private sequence seq_PositionChannels;
    private variable str_SQL_Filter;
    private variable arr_CenterSpots[];
    private variable arr_StackLabIDs[];
    private variable int_XCount;
    private dialog dialogHandle1;
    private variable int_InBetweenPlates;
    private variable bool_FileExists;
    private variable flt_ZBottom;
    o_arr_PlateCounts.SetSize( 0);
    o_arr_PlateCounts.SetSize(0);
    str_CenterSpotName = Translate("CS_");
    int_TotalStackNumber=i_arr_seq_PlateStacks.GetSize();
    int_NumChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    int_NumChannels = HELPERLIBRARY::GetChannelLimits(ML_STAR, 0, arr_YMax, arr_YMin, flt_ChanRaster);
    int_ChannelStart = 1;
    HELPERLIBRARY::GetCenterSpotLabware(str_CenterSpot);
    if(0){
      str_LogFolderPath = FilGetLogFilesPath();
      str_SortFile = StrConcat4(str_LogFolderPath, Translate("\\"), Translate("Plate_Stack_Verify_Sort"), Translate(".xls"));
    }
    HELPERLIBRARY::GetTempSortingFilePath(str_SortFile);
    bool_FileExists = HSLExtensions::File::Exists(str_SortFile);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(str_SortFile);
    }
    file1.AddField("ORDER", int_Order, hslInteger);
    file1.AddField("PLATE_LAB_TOP", str_PlateLabTop, hslString, 255);
    file1.AddField("PLATE_LAB_BOTTOM", str_PlateLabBottom, hslString, 255);
    file1.AddField("MAX_STACK", int_MaxStack, hslInteger);
    file1.AddField("Z_MIN", flt_ZMin, hslFloat);
    file1.AddField("Z_MAX", flt_ZMax, hslFloat);
    file1.AddField("Z_BOTTOM", flt_ZBottom, hslFloat);
    file1.AddField("Z_STEP_SIZE", flt_ZStepSize, hslFloat);
    file1.AddField("X_CENTER", flt_XCenter, hslFloat);
    file1.AddField("Y_CENTER", flt_YCenter, hslFloat);
    file1.AddField("PLATE_COUNT", int_PlateCount, hslInteger);
    file1.AddField("STATUS", str_Status, hslString, 255);
    if( 0 == file1.Open(str_SortFile + " " + "Stack_Info", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
    }
    str_Status = Translate("NOT_DONE");
    int_PlateCount = 0;
    {
      for(int_Order = 0; int_Order < int_TotalStackNumber;)
      {
        int_Order = int_Order + 1;
        seq_CurrentPlateStack=i_arr_seq_PlateStacks.GetAt(int_Order-1);
        SeqGetLabwareIds(seq_CurrentPlateStack, arr_LabIDs);
        int_MaxStack=arr_LabIDs.GetSize();
        str_PlateLabBottom=arr_LabIDs.GetAt(int_MaxStack-1);
        str_PlateLabTop=arr_LabIDs.GetAt(1-1);
        HELPERLIBRARY::GetRackHeight(ML_STAR, str_PlateLabBottom, flt_ZMin, NotUsed);
        HELPERLIBRARY::GetRackHeight(ML_STAR, str_PlateLabTop, flt_ZMax, NotUsed);
        if(0){
          DevGetLabwarePosition(ML_STAR, str_PlateLabBottom, NotUsed, NotUsed, flt_ZMin, NotUsed);
          DevGetLabwarePosition(ML_STAR, str_PlateLabTop, NotUsed, NotUsed, flt_ZMax, NotUsed);
        }
        if (flt_ZMin > flt_ZMax)
        {
          str_PlateLabBottom=arr_LabIDs.GetAt(1-1);
          str_PlateLabTop=arr_LabIDs.GetAt(int_MaxStack-1);
          if(0){
            DevGetLabwarePosition(ML_STAR, str_PlateLabBottom, NotUsed, NotUsed, flt_ZMin, NotUsed);
            DevGetLabwarePosition(ML_STAR, str_PlateLabTop, NotUsed, NotUsed, flt_ZMax, NotUsed);
          }
          HELPERLIBRARY::GetRackHeight(ML_STAR, str_PlateLabBottom, flt_ZMin, NotUsed);
          HELPERLIBRARY::GetRackHeight(ML_STAR, str_PlateLabTop, flt_ZMax, NotUsed);
        }
        flt_ZDifference = flt_ZMax - flt_ZMin;
        if (flt_ZDifference < 0)
        {
          flt_ZDifference = flt_ZDifference * -1;
        }
        int_InBetweenPlates = int_MaxStack - 1;
        if (int_InBetweenPlates == 0)
        {
          int_InBetweenPlates = 1;
        }
        flt_ZStepSize = flt_ZDifference / (int_InBetweenPlates * 1.0);
        HELPERLIBRARY::GetLabwareCenter2(ML_STAR, str_PlateLabTop, flt_XCenter, flt_YCenter);
        HELPERLIBRARY::GetLabwareOrigin(ML_STAR, str_PlateLabBottom, NotUsed, NotUsed, flt_ZBottom);
        if( 0 == file1.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    {
      while (1 == 1)
      {
        str_SQL_Count = StrConcat2(Translate("SELECT COUNT(*) AS N FROM [Stack_Info$] WHERE STATUS = 'NOT_DONE'"), Translate(""));
        FileQuery.AddField("N", int_NumNotDone, hslInteger);
        if( 0 == FileQuery.Open(str_SortFile + " " + "Stack_Info$", hslRead, str_SQL_Count) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
        }
        if( 0 == FileQuery.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != FileQuery.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        FileQuery.RemoveFields();
        if (int_NumNotDone == 0)
        {
          break;
        }
        str_SQL_Count = StrConcat2(Translate("SELECT X_CENTER, COUNT(*) AS N FROM [Stack_Info$] WHERE STATUS = 'NOT_DONE' GROUP BY X_CENTER"), Translate(" ORDER BY X_CENTER ASC"));
        FileQuery.AddField("X_CENTER", flt_XCenter, hslFloat);
        FileQuery.AddField("N", int_XCount, hslInteger);
        if( 0 == FileQuery.Open(str_SortFile + " " + "Stack_Info$", hslRead, str_SQL_Count) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
        }
        if( 0 == FileQuery.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != FileQuery.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        FileQuery.RemoveFields();
        if(0){
          Trace("   X Value:  ", flt_XCenter,"  Count:  ",int_XCount);
          str_SQL_Filter = StrConcat2(Translate("SELECT * FROM Stack_Info WHERE STATUS = 'NOT_DONE'"), Translate(" ORDER BY X_CENTER ASC, Y_CENTER DESC"));
        }
        str_SQL_Filter = StrConcat4(Translate("SELECT * FROM [Stack_Info$] WHERE STATUS = 'NOT_DONE' AND X_CENTER = "), flt_XCenter, Translate(" ORDER BY Y_CENTER DESC"), Translate(""));
        FileQuery.AddField("ORDER", int_Order, hslInteger);
        FileQuery.AddField("PLATE_LAB_TOP", str_PlateLabTop, hslString, 255);
        FileQuery.AddField("PLATE_LAB_BOTTOM", str_PlateLabBottom, hslString, 255);
        FileQuery.AddField("MAX_STACK", int_MaxStack, hslInteger);
        FileQuery.AddField("Z_MIN", flt_ZMin, hslFloat);
        FileQuery.AddField("Z_MAX", flt_ZMax, hslFloat);
        FileQuery.AddField("Z_BOTTOM", flt_ZBottom, hslFloat);
        FileQuery.AddField("Z_STEP_SIZE", flt_ZStepSize, hslFloat);
        FileQuery.AddField("X_CENTER", flt_XCenter, hslFloat);
        FileQuery.AddField("Y_CENTER", flt_YCenter, hslFloat);
        FileQuery.AddField("PLATE_COUNT", int_PlateCount, hslInteger);
        FileQuery.AddField("STATUS", str_Status, hslString, 255);
        if( 0 == FileQuery.Open(str_SortFile + " " + "Stack_Info$", hslRead, str_SQL_Filter) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
        }
        arr_ChannelsUsed.SetSize(int_NumChannels);
        arr_ChannelY.SetSize(int_NumChannels);
        arr_StackLabIDs.SetSize(int_NumChannels);
        {
          for(int_ChIndex = 0; int_ChIndex < int_NumChannels;)
          {
            int_ChIndex = int_ChIndex + 1;
            arr_ChannelsUsed.SetAt(int_ChIndex-1, 0);
            arr_ChannelY.SetAt(int_ChIndex-1, 0.0);
            arr_StackLabIDs.SetAt(int_ChIndex-1, Translate(""));
          }
        }
        int_ChannelCount = int_NumChannels - int_XCount;
        if (int_XCount > int_NumChannels)
        {
          int_ChannelCount = 0;
        }
        flt_CurrentX = 0.0;
        int_ChannelsUsed = 0;
        {
          while (
             (FileQuery.Eof() == 0)
          )
          {
            if( 0 == FileQuery.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if(0){
              Trace("  Plate Lab ID:  ",str_PlateLabTop);
            }
            if (flt_CurrentX == 0.0)
            {
              flt_CurrentX = flt_XCenter;
            }
            if (flt_XCenter != flt_CurrentX)
            {
              break;
            }
            {
              while (1 == 1)
              {
                int_ChannelCount = int_ChannelCount + 1;
                if (int_ChannelCount > int_NumChannels)
                {
                  break;
                }
                flt_YMax=arr_YMax.GetAt(int_ChannelCount-1);
                flt_YMin=arr_YMin.GetAt(int_ChannelCount-1);
                bol_ChannelYMaxGood = 0;
                bol_ChannelYMinGood = 0;
                if (flt_YCenter <= flt_YMax)
                {
                  bol_ChannelYMaxGood = 1;
                }
                if (flt_YCenter >= flt_YMin)
                {
                  bol_ChannelYMinGood = 1;
                }
                int_ChannelYGood = bol_ChannelYMaxGood + bol_ChannelYMinGood;
                if (int_ChannelYGood == 2)
                {
                  arr_StackLabIDs.SetAt(int_ChannelCount-1, str_PlateLabTop);
                  arr_ChannelY.SetAt(int_ChannelCount-1, flt_YCenter);
                  arr_ChannelsUsed.SetAt(int_ChannelCount-1, 1);
                  int_ChannelsUsed = int_ChannelsUsed + 1;
                  break;
                }
              }
            }
            if (int_ChannelCount > int_NumChannels)
            {
              break;
            }
          }
        }
        if( 0 != FileQuery.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        FileQuery.RemoveFields();
        SeqRemoveAll(seq_PositionChannels);
        int_ChannelsSet = 0;
        flt_PreviousY = 999999.9;
        if(0){
          Util2::Debug::TraceArray_2(Translate("Channel Use               Channel Y"), arr_ChannelsUsed, arr_ChannelY);
        }
        arr_CenterSpots.SetSize(0);
        {
          for(int_ChanIndex = 0; int_ChanIndex < int_NumChannels;)
          {
            int_ChanIndex = int_ChanIndex + 1;
            bol_ChannelStatus=arr_ChannelsUsed.GetAt(int_ChanIndex-1);
            flt_ChannelY=arr_ChannelY.GetAt(int_ChanIndex-1);
            if (bol_ChannelStatus == 0)
            {
              if (int_ChannelsSet == 0)
              {
                flt_ChannelY=arr_YMax.GetAt(int_ChanIndex-1);
              }
              if (int_ChannelsSet == int_ChannelsUsed)
              {
                flt_ChannelY=arr_YMin.GetAt(int_ChanIndex-1);
              }
            }
            else
            {
              int_ChannelsSet = int_ChannelsSet + 1;
            }
            str_LabID = StrConcat2(str_CenterSpotName, int_ChanIndex);
            DevAddLabware(ML_STAR, str_LabID, str_CenterSpot, flt_CurrentX, flt_ChannelY, 300.0, 0.0);
            SeqAdd(seq_PositionChannels, str_LabID, Translate("1"));
            arr_CenterSpots.AddAsLast(str_LabID);
          }
        }
        seq_PositionChannels.SetCurrentPosition(1);
        ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
        if(0){
          dialogHandle1.SetOutput(Translate(""));
          dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        _RemoveSpots(ML_STAR, arr_CenterSpots);
        if(0){
          Util2::Debug::TraceArray(Translate("Stack LabIDs"), arr_StackLabIDs);
        }
        _Find_Stack_Heights(ML_STAR, arr_StackLabIDs);
      }
    }
    file1.AddField("ORDER", int_Order, hslInteger);
    file1.AddField("PLATE_LAB_TOP", str_PlateLabTop, hslString, 255);
    file1.AddField("PLATE_LAB_BOTTOM", str_PlateLabBottom, hslString, 255);
    file1.AddField("MAX_STACK", int_MaxStack, hslInteger);
    file1.AddField("Z_MIN", flt_ZMin, hslFloat);
    file1.AddField("Z_MAX", flt_ZMax, hslFloat);
    file1.AddField("Z_BOTTOM", flt_ZBottom, hslFloat);
    file1.AddField("Z_STEP_SIZE", flt_ZStepSize, hslFloat);
    file1.AddField("X_CENTER", flt_XCenter, hslFloat);
    file1.AddField("Y_CENTER", flt_YCenter, hslFloat);
    file1.AddField("PLATE_COUNT", int_PlateCount, hslInteger);
    file1.AddField("STATUS", str_Status, hslString, 255);
    if( 0 == file1.Open(str_SortFile + " " + "Stack_Info$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
    }
    {
      while (
         (file1.Eof() == 0)
      )
      {
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        o_arr_PlateCounts.AddAsLast(int_PlateCount);
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if(0){
      HSLExtensions::File::Delete(str_SortFile);
    }
  }

  private function _RemoveSpots( device & ML_STAR, variable & i_arr_LabwareIDs[] ) void {
    private variable str_LabID;
    private variable int_NumLabware;
    private variable int_Index;
    int_NumLabware=i_arr_LabwareIDs.GetSize();
    {
      for(int_Index = 0; int_Index < int_NumLabware;)
      {
        int_Index = int_Index + 1;
        str_LabID=i_arr_LabwareIDs.GetAt(int_Index-1);
        DevRemoveLabware(ML_STAR, str_LabID);
      }
    }
    i_arr_LabwareIDs.SetSize(0);
  }

  private function _Find_Stack_Heights( device & ML_STAR, variable & i_arr_StackLabIDs[] ) void {
    private variable intResolution;
    private variable int_NumChannels;
    private variable str_FirmwareCMND;
    private variable strStackHeight;
    private variable intStackHeight;
    private variable int_ChIndex;
    private variable str_CurrentLabID;
    private variable int_PlateCount;
    private variable flt_ZMin;
    private variable flt_ZMax;
    private variable int_MaxStack;
    private variable flt_XCenter;
    private variable str_SQL_Filter;
    private variable str_Status;
    private variable flt_YCenter;
    private variable flt_ZStepSize;
    private variable int_Order;
    private variable str_PlateLabTop;
    private file file1;
    private variable bol_SimulationMode;
    private variable str_SQL_Update;
    private file UpdateFile;
    private variable int_LoopCounter;
    private variable int_SeekHeight;
    private variable flt_SeekHeight;
    private variable str_FirmwareParam;
    private variable int_ChannelNum;
    private variable str_ChIndex;
    private variable flt_Z_Bottom;
    private variable str_PlateLabBottom;
    private variable int_PlateIndex;
    private variable flt_CurrentPlateHeight;
    private variable flt_NoPlateFoundRange;
    private variable flt_HalfStepHeight;
    bol_SimulationMode = Util::GetSimulationMode();
    intResolution = 0.01072765;
    int_NumChannels=i_arr_StackLabIDs.GetSize();
    {
      for(int_ChIndex = 0; int_ChIndex < int_NumChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_CurrentLabID=i_arr_StackLabIDs.GetAt(int_ChIndex-1);
        if (str_CurrentLabID != "")
        {
          str_SQL_Filter = StrConcat4(Translate("SELECT * FROM [Stack_Info$] WHERE PLATE_LAB_TOP = '"), str_CurrentLabID, Translate("'"), Translate(""));
          file1.AddField("ORDER", int_Order, hslInteger);
          file1.AddField("PLATE_LAB_TOP", str_PlateLabTop, hslString, 255);
          file1.AddField("PLATE_LAB_BOTTOM", str_PlateLabBottom, hslString, 255);
          file1.AddField("MAX_STACK", int_MaxStack, hslInteger);
          file1.AddField("Z_MIN", flt_ZMin, hslFloat);
          file1.AddField("Z_MAX", flt_ZMax, hslFloat);
          file1.AddField("Z_BOTTOM", flt_Z_Bottom, hslFloat);
          file1.AddField("Z_STEP_SIZE", flt_ZStepSize, hslFloat);
          file1.AddField("X_CENTER", flt_XCenter, hslFloat);
          file1.AddField("Y_CENTER", flt_YCenter, hslFloat);
          file1.AddField("PLATE_COUNT", int_PlateCount, hslInteger);
          file1.AddField("STATUS", str_Status, hslString, 255);
          if( 0 == file1.Open(str_SortFile + " " + "Stack_Info$", hslRead, str_SQL_Filter) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
          }
          if( 0 == file1.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != file1.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file1.RemoveFields();
          Trace("Z Min:  ",flt_ZMin);
          int_ChannelNum = int_ChIndex;
          _ConvertChannelToAlpha(int_ChIndex, str_ChIndex);
          str_FirmwareCMND = StrConcat4(Translate("P"), str_ChIndex, Translate("ZG"), Translate(""));
          if (bol_SimulationMode == 0)
          {
            flt_SeekHeight = flt_Z_Bottom - 0.0;
          }
          else
          {
            flt_SeekHeight = flt_ZMax - 0.0;
          }
          flt_SeekHeight = flt_SeekHeight / (intResolution * 1.0);
          int_SeekHeight = MthCeiling(flt_SeekHeight);
          if (int_SeekHeight < 12584)
          {
            int_SeekHeight = 12584;
          }
          str_FirmwareParam = StrConcat4(Translate("za"), int_SeekHeight, Translate("zr010"), Translate("zw1"));
          str_FirmwareParam = StrConcat2(str_FirmwareParam, Translate("zv04500"));
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          str_FirmwareCMND = StrConcat4(Translate("P"), str_ChIndex, Translate("RZ"), Translate(""));
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            	strStackHeight = arrRetValues[3];
          }
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          str_FirmwareCMND = StrConcat4(Translate("P"), str_ChIndex, Translate("ZD"), Translate(""));
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          if (bol_SimulationMode == 0)
          {
            strStackHeight = StrMid(strStackHeight, 3, 5);
            intStackHeight = StrIVal(strStackHeight);
            intStackHeight = intStackHeight * intResolution;
          }
          else
          {
            intStackHeight = flt_ZMax;
          }
          Trace("Stack Height Found:  ",intStackHeight);
          int_PlateCount = 0;
          {
            for(int_LoopCounter = 0; int_LoopCounter < 1;)
            {
              int_LoopCounter = int_LoopCounter + 1;
              if (intStackHeight < 135.0)
              {
                break;
              }
              flt_HalfStepHeight = flt_ZStepSize / (2 * 1.0);
              flt_NoPlateFoundRange = flt_Z_Bottom + flt_HalfStepHeight;
              if(0){
                if (intStackHeight == flt_Z_Bottom)
                {
                  break;
                }
              }
              if (intStackHeight <= flt_NoPlateFoundRange)
              {
                break;
              }
              flt_CurrentPlateHeight = flt_Z_Bottom;
              if (intStackHeight > flt_CurrentPlateHeight)
              {
                int_PlateCount = int_PlateCount + 1;
              }
              flt_CurrentPlateHeight = flt_ZMin;
              {
                for(int_PlateIndex = 0; int_PlateIndex < int_MaxStack;)
                {
                  int_PlateIndex = int_PlateIndex + 1;
                  if(0){
                    Trace("Stack Height:  ",intStackHeight,"  Current Plate Height:  ",flt_CurrentPlateHeight);
                  }
                  if (intStackHeight > flt_CurrentPlateHeight)
                  {
                    flt_CurrentPlateHeight = flt_CurrentPlateHeight + flt_ZStepSize;
                    if(0){
                      Trace("Step Size:  ",flt_ZStepSize);
                    }
                    int_PlateCount = int_PlateCount + 1;
                  }
                  else
                  {
                    break;
                  }
                }
              }
            }
          }
          str_SQL_Update = StrConcat12(Translate("UPDATE [Stack_Info$] SET STATUS = 'DONE', PLATE_COUNT = "), int_PlateCount, Translate(" WHERE PLATE_LAB_TOP = '"), str_CurrentLabID, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          if( 0 == UpdateFile.Open(str_SortFile + " " + "Stack_Info$", hslRead, str_SQL_Update) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
          }
          if( 0 != UpdateFile.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          UpdateFile.RemoveFields();
        }
      }
    }
  }

  function Get_Arr_StackSequences( device & ML_STAR, sequence i_seq_AllStacks, sequence & o_arr_StackSequences[] ) void {
    private variable arr_TemplateSites[];
    private variable arr_LabIDs[];
    private variable str_LabID;
    private variable int_NumLabIDs;
    private variable int_Index;
    private variable str_TemplateSite;
    private variable str_Template;
    private variable str_Location;
    private variable str_TempLab;
    private variable str_TempPos;
    private variable int_arrPosition;
    private sequence seq_Transport;
    private sequence seq_CurrentPosition;
    private variable arr_Index[];
    private variable int_LocationFound;
    o_arr_StackSequences.SetSize( 0);
    SeqGetLabwareIds(i_seq_AllStacks, arr_LabIDs);
    o_arr_StackSequences.SetSize(0);
    arr_TemplateSites.SetSize(0);
    int_NumLabIDs=arr_LabIDs.GetSize();
    {
      for(int_Index = 0; int_Index < int_NumLabIDs;)
      {
        int_Index = int_Index + 1;
        str_LabID=arr_LabIDs.GetAt(int_Index-1);
        HELPERLIBRARY::GetCarrierAndSiteID(ML_STAR, str_LabID, str_Template, str_TemplateSite);
        str_Location = StrConcat2(str_Template, str_TemplateSite);
        arr_Index = HSLExtensions::Array::FindValue(arr_TemplateSites, str_Location);
        int_LocationFound=arr_Index.GetSize();
        int_arrPosition = 0;
        if (int_LocationFound > 0)
        {
          int_arrPosition=arr_Index.GetAt(1-1);
        }
        if(0){
          HSLLabwrAccess::GetTransportSequenceForLabwareID(ML_STAR, str_LabID, seq_Transport);
        }
        HELPERLIBRARY::GetTransportSequence(ML_STAR, str_LabID, seq_Transport);
        if (int_arrPosition == 0)
        {
          o_arr_StackSequences.AddAsLast(seq_Transport);
          arr_TemplateSites.AddAsLast(str_Location);
        }
        else
        {
          seq_CurrentPosition=o_arr_StackSequences.GetAt(int_arrPosition-1);
          str_TempLab = SeqGetLabwareId(seq_Transport);
          str_TempPos = SeqGetPositionId(seq_Transport);
          SeqAdd(seq_CurrentPosition, str_TempLab, str_TempPos);
          seq_CurrentPosition.SetCurrentPosition(1);
          o_arr_StackSequences.SetAt(int_arrPosition-1, seq_CurrentPosition);
        }
      }
    }
  }

  function _ConvertChannelToAlpha( variable & i_int_ChanNum, variable & o_str_ChanNum ) void {
    o_str_ChanNum = 0;
    if (i_int_ChanNum <= 9)
    {
      o_str_ChanNum = StrConcat2(i_int_ChanNum, Translate(""));
    }
    else
    {
      if (i_int_ChanNum == 10)
      {
        o_str_ChanNum = Translate("A");
      }
      else
      {
        if (i_int_ChanNum == 11)
        {
          o_str_ChanNum = "B";
        }
        else
        {
          if (i_int_ChanNum == 12)
          {
            o_str_ChanNum = Translate("C");
          }
          else
          {
            if (i_int_ChanNum == 13)
            {
              o_str_ChanNum = Translate("D");
            }
            else
            {
              if (i_int_ChanNum == 14)
              {
                o_str_ChanNum = Translate("E");
              }
              else
              {
                if (i_int_ChanNum == 15)
                {
                  o_str_ChanNum = Translate("F");
                }
                else
                {
                  if (i_int_ChanNum == 16)
                  {
                    o_str_ChanNum = Translate("G");
                  }
                }
              }
            }
          }
        }
      }
    }
  }

  function Plate_Stack_Verfy_V2( device & ML_STAR, sequence & i_arr_seq_PlateStacks[], variable & o_arr_PlateCounts[] ) void {
    private variable int_NumChannels;
    private variable flt_ChanRaster;
    private variable flt_ZBottom;
    private variable flt_ZMin;
    private variable int_PlateCount;
    private variable flt_ZMax;
    private variable int_MaxStack;
    private variable str_Carrier;
    private variable int_TotalStackNumber;
    private variable bool_FileExists;
    private variable str_CarrierSite;
    private variable flt_XCenter;
    private variable str_Status;
    private variable flt_YCenter;
    private variable flt_ZStepSize;
    private variable int_Order;
    private variable int_ChannelStart;
    private variable str_PlateLabBottom;
    private variable str_PlateLabTop;
    private file file1;
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable int_NumNotDone;
    private variable int_InBetweenPlates;
    private variable flt_ZDifference;
    private variable NotUsed;
    private variable int_XCount;
    private variable str_SQL_Count;
    private variable flt_CarrierAngle;
    private variable flt_CarrierX;
    private variable flt_CarrierY;
    private variable flt_CarrierZ;
    private sequence seq_CurrentPlateStack;
    private file FileQuery;
    private variable arr_LabIDs[];
    private variable str_SQL_Avg;
    private variable flt_CurrentX;
    private variable flt_YMin;
    private variable int_ChanIndex;
    private variable flt_YMax;
    private variable int_ChannelsUsed;
    private variable int_ChannelCount;
    private variable str_SQL_Filter;
    private variable flt_ChannelY;
    private variable bol_ChannelStatus;
    private variable bol_ChannelYMinGood;
    private variable int_ChannelYGood;
    private variable str_ChPattern;
    private variable bol_ChannelYMaxGood;
    private variable int_ChIndex;
    private variable arr_ChannelsUsed[];
    private variable arr_StackLabIDs[];
    private variable arr_fltXCoords[];
    private variable arr_fltYCoords[];
    private variable arr_fltZCoords[];
    private variable arr_ChannelY[];
    private variable flt_CurrentZ;
    o_arr_PlateCounts.SetSize( 0);
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_arr_PlateCounts.SetSize(0);
    int_TotalStackNumber=i_arr_seq_PlateStacks.GetSize();
    int_NumChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    int_NumChannels = HELPERLIBRARY::GetChannelLimits(ML_STAR, 0, arr_YMax, arr_YMin, flt_ChanRaster);
    int_ChannelStart = 1;
    HELPERLIBRARY::GetTempSortingFilePath(str_SortFile);
    bool_FileExists = HSLExtensions::File::Exists(str_SortFile);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(str_SortFile);
    }
    file1.AddField("ORDER", int_Order, hslInteger);
    file1.AddField("PLATE_LAB_TOP", str_PlateLabTop, hslString, 255);
    file1.AddField("PLATE_LAB_BOTTOM", str_PlateLabBottom, hslString, 255);
    file1.AddField("MAX_STACK", int_MaxStack, hslInteger);
    file1.AddField("Z_MIN", flt_ZMin, hslFloat);
    file1.AddField("Z_MAX", flt_ZMax, hslFloat);
    file1.AddField("Z_BOTTOM", flt_ZBottom, hslFloat);
    file1.AddField("Z_STEP_SIZE", flt_ZStepSize, hslFloat);
    file1.AddField("X_CENTER", flt_XCenter, hslFloat);
    file1.AddField("Y_CENTER", flt_YCenter, hslFloat);
    file1.AddField("CARRIER", str_Carrier, hslString, 255);
    file1.AddField("CARRIER_SITE", str_CarrierSite, hslString, 255);
    file1.AddField("CARRIER_X", flt_CarrierX, hslFloat);
    file1.AddField("PLATE_COUNT", int_PlateCount, hslInteger);
    file1.AddField("STATUS", str_Status, hslString, 255);
    if( 0 == file1.Open(str_SortFile + " " + "Stack_Info", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
    }
    str_Status = Translate("NOT_DONE");
    int_PlateCount = 0;
    {
      for(int_Order = 0; int_Order < int_TotalStackNumber;)
      {
        int_Order = int_Order + 1;
        seq_CurrentPlateStack=i_arr_seq_PlateStacks.GetAt(int_Order-1);
        SeqGetLabwareIds(seq_CurrentPlateStack, arr_LabIDs);
        if(0){
          Util2::Debug::TraceArray(Translate("Lab IDs"), arr_LabIDs);
        }
        int_MaxStack=arr_LabIDs.GetSize();
        str_PlateLabBottom=arr_LabIDs.GetAt(int_MaxStack-1);
        str_PlateLabTop=arr_LabIDs.GetAt(1-1);
        HELPERLIBRARY::GetRackHeight(ML_STAR, str_PlateLabBottom, flt_ZMin, NotUsed);
        HELPERLIBRARY::GetRackHeight(ML_STAR, str_PlateLabTop, flt_ZMax, NotUsed);
        if (flt_ZMin > flt_ZMax)
        {
          str_PlateLabBottom=arr_LabIDs.GetAt(1-1);
          str_PlateLabTop=arr_LabIDs.GetAt(int_MaxStack-1);
          HELPERLIBRARY::GetRackHeight(ML_STAR, str_PlateLabBottom, flt_ZMin, NotUsed);
          HELPERLIBRARY::GetRackHeight(ML_STAR, str_PlateLabTop, flt_ZMax, NotUsed);
        }
        HELPERLIBRARY::GetLabwareCenter2(ML_STAR, str_PlateLabTop, flt_XCenter, flt_YCenter);
        HELPERLIBRARY::GetLabwareOrigin(ML_STAR, str_PlateLabBottom, NotUsed, NotUsed, flt_ZBottom);
        HELPERLIBRARY::GetCarrierAndSiteID(ML_STAR, str_PlateLabBottom, str_Carrier, str_CarrierSite);
        TRACE::TRACE04(Translate("     "), str_Carrier, Translate(""), Translate(""));
        if (str_Carrier != "default")
        {
          DevGetLabwarePosition(ML_STAR, str_Carrier, flt_CarrierX, flt_CarrierY, flt_CarrierZ, flt_CarrierAngle);
        }
        else
        {
          DevGetLabwarePosition(ML_STAR, str_PlateLabBottom, flt_CarrierX, flt_CarrierY, flt_CarrierZ, flt_CarrierAngle);
        }
        flt_ZDifference = flt_ZMax - flt_ZMin;
        if (flt_ZDifference < 0)
        {
          flt_ZDifference = flt_ZDifference * -1;
        }
        int_InBetweenPlates = int_MaxStack - 1;
        if (int_InBetweenPlates == 0)
        {
          int_InBetweenPlates = 1;
          flt_ZDifference = flt_ZMax - flt_ZBottom;
        }
        flt_ZStepSize = flt_ZDifference / (int_InBetweenPlates * 1.0);
        if( 0 == file1.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    {
      while (1 == 1)
      {
        str_SQL_Count = StrConcat2(Translate("SELECT COUNT(*) AS N FROM [Stack_Info$] WHERE STATUS = 'NOT_DONE'"), Translate(""));
        FileQuery.AddField("N", int_NumNotDone, hslInteger);
        if( 0 == FileQuery.Open(str_SortFile + " " + "Stack_Info$", hslRead, str_SQL_Count) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
        }
        if( 0 == FileQuery.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != FileQuery.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        FileQuery.RemoveFields();
        if (int_NumNotDone == 0)
        {
          break;
        }
        str_SQL_Count = StrConcat2(Translate("SELECT CARRIER_X, COUNT(*) AS N FROM [Stack_Info$] WHERE STATUS = 'NOT_DONE' GROUP BY CARRIER_X"), Translate(" ORDER BY CARRIER_X ASC"));
        FileQuery.AddField("CARRIER_X", flt_CarrierX, hslFloat);
        FileQuery.AddField("N", int_XCount, hslInteger);
        if( 0 == FileQuery.Open(str_SortFile + " " + "Stack_Info$", hslRead, str_SQL_Count) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
        }
        if( 0 == FileQuery.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != FileQuery.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        FileQuery.RemoveFields();
        if(0){
          str_SQL_Avg = StrConcat4(Translate("SELECT CARRIER_X, AVG(X_CENTER) AS N FROM [Stack_Info$] WHERE STATUS = 'NOT_DONE' AND CARRIER_X = "), flt_CarrierX, Translate(""), Translate(""));
        }
        str_SQL_Avg = StrConcat4(Translate("SELECT AVG(X_CENTER) AS N FROM [Stack_Info$] WHERE STATUS = 'NOT_DONE' AND CARRIER_X = "), flt_CarrierX, Translate(""), Translate(""));
        FileQuery.AddField("N", flt_XCenter, hslInteger);
        if( 0 == FileQuery.Open(str_SortFile + " " + "Stack_Info$", hslRead, str_SQL_Avg) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
        }
        if( 0 == FileQuery.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != FileQuery.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        FileQuery.RemoveFields();
        str_SQL_Filter = StrConcat4(Translate("SELECT * FROM [Stack_Info$] WHERE STATUS = 'NOT_DONE' AND CARRIER_X = "), flt_CarrierX, Translate(" ORDER BY Y_CENTER DESC"), Translate(""));
        FileQuery.AddField("ORDER", int_Order, hslInteger);
        FileQuery.AddField("PLATE_LAB_TOP", str_PlateLabTop, hslString, 255);
        FileQuery.AddField("PLATE_LAB_BOTTOM", str_PlateLabBottom, hslString, 255);
        FileQuery.AddField("MAX_STACK", int_MaxStack, hslInteger);
        FileQuery.AddField("Z_MIN", flt_ZMin, hslFloat);
        FileQuery.AddField("Z_MAX", flt_ZMax, hslFloat);
        FileQuery.AddField("Z_BOTTOM", flt_ZBottom, hslFloat);
        FileQuery.AddField("Z_STEP_SIZE", flt_ZStepSize, hslFloat);
        FileQuery.AddField("X_CENTER", flt_XCenter, hslFloat);
        FileQuery.AddField("Y_CENTER", flt_YCenter, hslFloat);
        FileQuery.AddField("CARRIER", str_Carrier, hslString, 255);
        FileQuery.AddField("CARRIER_SITE", str_CarrierSite, hslString, 255);
        FileQuery.AddField("CARRIER_X", flt_CarrierX, hslFloat);
        FileQuery.AddField("PLATE_COUNT", int_PlateCount, hslInteger);
        FileQuery.AddField("STATUS", str_Status, hslString, 255);
        if( 0 == FileQuery.Open(str_SortFile + " " + "Stack_Info", hslRead, str_SQL_Filter) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
        }
        arr_ChannelsUsed.SetSize(int_NumChannels);
        arr_ChannelY.SetSize(int_NumChannels);
        arr_StackLabIDs.SetSize(int_NumChannels);
        {
          for(int_ChIndex = 0; int_ChIndex < int_NumChannels;)
          {
            int_ChIndex = int_ChIndex + 1;
            arr_ChannelsUsed.SetAt(int_ChIndex-1, 0);
            arr_ChannelY.SetAt(int_ChIndex-1, 0.0);
            arr_StackLabIDs.SetAt(int_ChIndex-1, Translate(""));
          }
        }
        int_ChannelCount = int_NumChannels - int_XCount;
        if (int_XCount > int_NumChannels)
        {
          int_ChannelCount = 0;
        }
        flt_CurrentX = 0.0;
        int_ChannelsUsed = 0;
        {
          while (
             (FileQuery.Eof() == 0)
          )
          {
            if( 0 == FileQuery.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (flt_CurrentX == 0.0)
            {
              flt_CurrentX = flt_CarrierX;
            }
            if (flt_CarrierX != flt_CurrentX)
            {
              break;
            }
            {
              while (1 == 1)
              {
                int_ChannelCount = int_ChannelCount + 1;
                if (int_ChannelCount > int_NumChannels)
                {
                  break;
                }
                flt_YMax=arr_YMax.GetAt(int_ChannelCount-1);
                flt_YMin=arr_YMin.GetAt(int_ChannelCount-1);
                bol_ChannelYMaxGood = 0;
                bol_ChannelYMinGood = 0;
                if (flt_YCenter <= flt_YMax)
                {
                  bol_ChannelYMaxGood = 1;
                }
                if (flt_YCenter >= flt_YMin)
                {
                  bol_ChannelYMinGood = 1;
                }
                int_ChannelYGood = bol_ChannelYMaxGood + bol_ChannelYMinGood;
                if (int_ChannelYGood == 2)
                {
                  arr_StackLabIDs.SetAt(int_ChannelCount-1, str_PlateLabTop);
                  arr_ChannelY.SetAt(int_ChannelCount-1, flt_YCenter);
                  arr_ChannelsUsed.SetAt(int_ChannelCount-1, 1);
                  int_ChannelsUsed = int_ChannelsUsed + 1;
                  break;
                }
              }
            }
            if (int_ChannelCount > int_NumChannels)
            {
              break;
            }
          }
        }
        if( 0 != FileQuery.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        FileQuery.RemoveFields();
        str_ChPattern = Translate("");
        arr_fltXCoords.SetSize(0);
        arr_fltYCoords.SetSize(0);
        arr_fltZCoords.SetSize(0);
        {
          for(int_ChanIndex = 0; int_ChanIndex < int_NumChannels;)
          {
            int_ChanIndex = int_ChanIndex + 1;
            if(0){
              flt_CurrentZ = 334.7;
            }
            flt_CurrentZ = 245.0;
            bol_ChannelStatus=arr_ChannelsUsed.GetAt(int_ChanIndex-1);
            flt_ChannelY=arr_ChannelY.GetAt(int_ChanIndex-1);
            str_ChPattern = StrConcat2(str_ChPattern, bol_ChannelStatus);
            arr_fltXCoords.AddAsLast(flt_XCenter);
            arr_fltYCoords.AddAsLast(flt_ChannelY);
            arr_fltZCoords.AddAsLast(flt_CurrentZ);
          }
        }
        STAR_CHANNEL_MOVEMENT_TOOLS::Move_Channels_To_Absolute_Position_1mL(ML_STAR, str_ChPattern, 245.0, arr_fltXCoords, arr_fltYCoords, arr_fltZCoords);
        _Find_Stack_Heights_V2(ML_STAR, arr_StackLabIDs, str_ChPattern, arr_fltXCoords, arr_fltYCoords, arr_fltZCoords);
      }
    }
    file1.AddField("ORDER", int_Order, hslInteger);
    file1.AddField("PLATE_LAB_TOP", str_PlateLabTop, hslString, 255);
    file1.AddField("PLATE_LAB_BOTTOM", str_PlateLabBottom, hslString, 255);
    file1.AddField("MAX_STACK", int_MaxStack, hslInteger);
    file1.AddField("Z_MIN", flt_ZMin, hslFloat);
    file1.AddField("Z_MAX", flt_ZMax, hslFloat);
    file1.AddField("Z_BOTTOM", flt_ZBottom, hslFloat);
    file1.AddField("Z_STEP_SIZE", flt_ZStepSize, hslFloat);
    file1.AddField("X_CENTER", flt_XCenter, hslFloat);
    file1.AddField("Y_CENTER", flt_YCenter, hslFloat);
    file1.AddField("CARRIER", str_Carrier, hslString, 255);
    file1.AddField("CARRIER_SITE", str_CarrierSite, hslString, 255);
    file1.AddField("CARRIER_X", flt_CarrierX, hslFloat);
    file1.AddField("PLATE_COUNT", int_PlateCount, hslInteger);
    file1.AddField("STATUS", str_Status, hslString, 255);
    if( 0 == file1.Open(str_SortFile + " " + "Stack_Info", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
    }
    {
      while (
         (file1.Eof() == 0)
      )
      {
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        o_arr_PlateCounts.AddAsLast(int_PlateCount);
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
  }

  private function _Find_Stack_Heights_V2( device & ML_STAR, variable & i_arr_StackLabIDs[], variable i_strChPattern, variable & i_arrXCoords[], variable & i_arrYCoords[], variable & i_arrZCoords[] ) void {
    private variable int_NumChannels;
    private variable int_PlateCount;
    private variable flt_ZBottom;
    private variable flt_ZMin;
    private variable flt_ZMax;
    private variable int_MaxStack;
    private variable str_Carrier;
    private variable str_CarrierSite;
    private variable flt_CarrierX;
    private variable flt_XCenter;
    private variable str_SQL_Filter;
    private variable str_Status;
    private variable flt_YCenter;
    private variable flt_ZStepSize;
    private variable int_Order;
    private variable str_PlateLabBottom;
    private variable str_PlateLabTop;
    private variable str_CurrentLabID;
    private variable int_ChIndex;
    private file file1;
    private variable flt_Z_Bottom;
    private variable flt_SeekHeight;
    private variable int_ChannelNum;
    private variable int_PlateIndex;
    private variable flt_NoPlateFoundRange;
    private variable flt_HalfStepHeight;
    private variable intStackHeight;
    private variable str_SQL_Update;
    private variable flt_CurrentPlateHeight;
    private variable int_LoopCounter;
    private file UpdateFile;
    private variable flt_CurrentPlusHalf;
    private variable bln_PlateFound;
    private variable flt_TipLength;
    int_NumChannels=i_arr_StackLabIDs.GetSize();
    {
      for(int_ChIndex = 0; int_ChIndex < int_NumChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_CurrentLabID=i_arr_StackLabIDs.GetAt(int_ChIndex-1);
        if (str_CurrentLabID != "")
        {
          str_SQL_Filter = StrConcat4(Translate("SELECT * FROM [Stack_Info$] WHERE PLATE_LAB_TOP = '"), str_CurrentLabID, Translate("'"), Translate(""));
          file1.AddField("ORDER", int_Order, hslInteger);
          file1.AddField("PLATE_LAB_TOP", str_PlateLabTop, hslString, 255);
          file1.AddField("PLATE_LAB_BOTTOM", str_PlateLabBottom, hslString, 255);
          file1.AddField("MAX_STACK", int_MaxStack, hslInteger);
          file1.AddField("Z_MIN", flt_ZMin, hslFloat);
          file1.AddField("Z_MAX", flt_ZMax, hslFloat);
          file1.AddField("Z_BOTTOM", flt_ZBottom, hslFloat);
          file1.AddField("Z_STEP_SIZE", flt_ZStepSize, hslFloat);
          file1.AddField("X_CENTER", flt_XCenter, hslFloat);
          file1.AddField("Y_CENTER", flt_YCenter, hslFloat);
          file1.AddField("CARRIER", str_Carrier, hslString, 255);
          file1.AddField("CARRIER_SITE", str_CarrierSite, hslString, 255);
          file1.AddField("CARRIER_X", flt_CarrierX, hslFloat);
          file1.AddField("PLATE_COUNT", int_PlateCount, hslInteger);
          file1.AddField("STATUS", str_Status, hslString, 255);
          if( 0 == file1.Open(str_SortFile + " " + "Stack_Info", hslRead, str_SQL_Filter) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
          }
          if( 0 == file1.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != file1.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file1.RemoveFields();
          Trace("Z Min:  ",flt_ZMin);
          int_ChannelNum = int_ChIndex;
          if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
          {
            flt_SeekHeight = flt_Z_Bottom - 0.0;
          }
          else
          {
            flt_SeekHeight = flt_ZMax - 0.0;
          }
          if (flt_SeekHeight < 135.0)
          {
            flt_SeekHeight = 135.0;
          }
          Trace("Z Seek Height:  ",flt_SeekHeight);
          if (G_FW_PIP_COM_InstrumentType <= 2)
          {
            STAR_CHANNEL_MOVEMENT_TOOLS::QueryTipLength(ML_STAR, int_ChannelNum, flt_TipLength);
            bln_PlateFound = STAR_CHANNEL_MOVEMENT_TOOLS::Search_Z(ML_STAR, int_ChannelNum, flt_SeekHeight, flt_TipLength, 1, intStackHeight);
          }
          else
          {
            VANTAGE_CHANNEL_MOVEMENT_TOOLS::QueryTipLength(ML_STAR, int_ChannelNum, flt_TipLength);
            bln_PlateFound = VANTAGE_CHANNEL_MOVEMENT_TOOLS::Search_Z(ML_STAR, int_ChannelNum, flt_SeekHeight, flt_TipLength, 1, intStackHeight);
          }
          if (G_FW_PIP_COM_SimulationMode == BOOLEON::TRUE)
          {
            intStackHeight = flt_ZMax;
          }
          Trace("Stack Height Found:  ",intStackHeight);
          int_PlateCount = 0;
          {
            for(int_LoopCounter = 0; int_LoopCounter < 1;)
            {
              int_LoopCounter = int_LoopCounter + 1;
              if (intStackHeight < 135.0)
              {
                MECC::TraceComment(Translate("Channel Limit"));
                break;
              }
              if (bln_PlateFound == BOOLEON::FALSE)
              {
                break;
              }
              flt_HalfStepHeight = flt_ZStepSize / (2 * 1.0);
              flt_NoPlateFoundRange = flt_ZBottom + flt_HalfStepHeight;
              if(0){
                TRACE::TRACE04(Translate("Plate Stack Height:  "), intStackHeight, Translate("     No Plate Found Range:  "), flt_NoPlateFoundRange);
              }
              if (intStackHeight <= flt_NoPlateFoundRange)
              {
                MECC::TraceComment(Translate("No plate found"));
                break;
              }
              flt_CurrentPlateHeight = flt_ZBottom;
              if (intStackHeight > flt_CurrentPlateHeight)
              {
                int_PlateCount = int_PlateCount + 1;
              }
              flt_CurrentPlateHeight = flt_ZMin;
              {
                for(int_PlateIndex = 0; int_PlateIndex < int_MaxStack;)
                {
                  int_PlateIndex = int_PlateIndex + 1;
                  if(0){
                    Trace("Stack Height:  ",intStackHeight,"  Current Plate Height:  ",flt_CurrentPlateHeight);
                  }
                  flt_CurrentPlusHalf = flt_CurrentPlateHeight + flt_HalfStepHeight;
                  if (intStackHeight > flt_CurrentPlusHalf)
                  {
                    flt_CurrentPlateHeight = flt_CurrentPlateHeight + flt_ZStepSize;
                    if(0){
                      Trace("Step Size:  ",flt_ZStepSize);
                    }
                    int_PlateCount = int_PlateCount + 1;
                  }
                  else
                  {
                    break;
                  }
                }
              }
            }
          }
          str_SQL_Update = StrConcat12(Translate("UPDATE [Stack_Info$] SET STATUS = 'DONE', PLATE_COUNT = "), int_PlateCount, Translate(" WHERE PLATE_LAB_TOP = '"), str_CurrentLabID, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          if( 0 == UpdateFile.Open(str_SortFile + " " + "Stack_Info$", hslRead, str_SQL_Update) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SortFile, "HxMetEdCompCmd");
          }
          if( 0 != UpdateFile.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          UpdateFile.RemoveFields();
        }
      }
    }
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      STAR_CHANNEL_MOVEMENT_TOOLS::Reset_Search_Z(ML_STAR);
    }
    else
    {
      VANTAGE_CHANNEL_MOVEMENT_TOOLS::Reset_Search_Z(ML_STAR);
    }
  }
} // library namespace
