#pragma once
#include "HSLMthLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLErrLib.hsl"
#include "HSLUtilLib.hsl"
#include "STAR Tools\\Resources\\SubMethods\\FW_HelperLibrary.hs_"
#include "HSLDevLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace STAR_CHANNEL_MOVEMENT_TOOLS {
  function CheckPlateWithTwoChannels( device & ML_STAR, variable i_flt_XCenter, variable i_flt_YCenter, variable i_flt_ZMinimumSearchHeight, variable i_flt_ZSpeed, variable i_flt_SearchWidth, variable i_flt_MinimumTraverseHeightBegining, variable i_flt_MinimumTraverseHeightEnding, variable i_int_BackChannel, variable i_int_FrontChannel ) variable ;
  function GetStopDiskZCoord( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_ZCoord ) void ;
  function Get_Channel_Position( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void ;
  function Get_Channel_Position_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void ;
  function Get_Channel_Position_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void ;
  function Get_Tip_Present_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_bool_TipPresent ) void ;
  function Get_Tip_Present_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_bool_TipPresent ) void ;
  function Get_Tip_Volume_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void ;
  function Get_Tip_Volume_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void ;
  function InitializeDispenseDrive_1mL( device & ML_STAR, variable i_int_CurrentChannel ) void ;
  function InitializeDispenseDrive_5mL( device & ML_STAR, variable i_int_CurrentChannel ) void ;
  function Move_Channels_To_Absolute_Position( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable i_flt_X_Position, variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void ;
  function Move_Channels_To_Absolute_Position_1mL( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable & i_arr_X_Position[], variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void ;
  function Move_Channels_To_Absolute_Position_5mL( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable & i_arr_X_Position[], variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void ;
  function QueryTipLength( device & ML_STAR, variable i_intChannelNumber, variable & o_fltTipLength ) void ;
  function ResetChannelFW( device & ML_STAR ) void ;
  function Reset_Search_Z( device & ML_STAR ) void ;
  function Search_Z( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Z_Min, variable i_flt_TipLength, variable i_int_Sensitivity, variable & o_flt_Z_Found ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    FW_HELPERLIBRARY::_InitLibrary();
  }
  function _ExitLibrary() {
    FW_HELPERLIBRARY::_ExitLibrary();
  }

  function CheckPlateWithTwoChannels( device & ML_STAR, variable i_flt_XCenter, variable i_flt_YCenter, variable i_flt_ZMinimumSearchHeight, variable i_flt_ZSpeed, variable i_flt_SearchWidth, variable i_flt_MinimumTraverseHeightBegining, variable i_flt_MinimumTraverseHeightEnding, variable i_int_BackChannel, variable i_int_FrontChannel ) variable {
    private variable int_ZY;
    private variable str_te;
    private variable bool_ParamFound;
    private variable int_yg;
    private variable str_YJ;
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable flt_ZY;
    private variable flt_yg;
    private variable int_Length;
    private variable int_ZJ;
    private variable flt_ZJ;
    private variable int_YJ;
    private variable i;
    private variable int_te;
    private variable str_th;
    private variable strFunctionName;
    private variable flt_YJ;
    private variable flt_te;
    private variable str_yo;
    private variable str_FWCommand;
    private variable int_th;
    private variable int_TotalParameters;
    private variable flt_th;
    private variable strFunctionName_Cut;
    private variable int_yo;
    private variable str_FWCommandSet;
    private variable flt_yo;
    private variable str_XS;
    private variable str_Parameters;
    private variable flt_OpenWidth;
    private variable int_ErrorCode;
    private variable str_BackChannel;
    private variable str_XD;
    private variable str_YV;
    private variable str_YW;
    private variable int_XS;
    private variable int_Count;
    private variable flt_XS;
    private variable str_ZY;
    private variable str_yg;
    private variable ret_WallFound;
    private variable str_ParameterSet;
    private variable str_FrontChannel;
    private variable str_ZJ;
    private variable arr_ParameterList[];
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    ret_WallFound = 0;
    str_FWCommand = Translate("C0ZP");
    str_Parameters = Translate("");
    arr_ParameterList.SetSize(0);
    flt_XS = i_flt_XCenter * 10;
    int_XS = MthCeiling(flt_XS);
    str_XS = StrConcat2(int_XS, Translate(""));
    str_XS = StrFillLeft(str_XS, Translate("0"), 5);
    str_XS = StrConcat2(Translate("xs"), str_XS);
    arr_ParameterList.AddAsLast(str_XS);
    if (i_flt_XCenter > 0)
    {
      str_XD = Translate("xd0");
    }
    else
    {
      str_XD = Translate("xd1");
    }
    arr_ParameterList.AddAsLast(str_XD);
    flt_YJ = i_flt_YCenter * 10;
    int_YJ = MthCeiling(flt_YJ);
    str_YJ = StrConcat2(int_YJ, Translate(""));
    str_YJ = StrFillLeft(str_YJ, Translate("0"), 4);
    str_YJ = StrConcat2(Translate("yj"), str_YJ);
    arr_ParameterList.AddAsLast(str_YJ);
    str_YV = Translate("yv2778");
    arr_ParameterList.AddAsLast(str_YV);
    flt_ZJ = i_flt_ZMinimumSearchHeight * 10;
    int_ZJ = MthCeiling(flt_ZJ);
    str_ZJ = StrConcat2(int_ZJ, Translate(""));
    str_ZJ = StrFillLeft(str_ZJ, Translate("0"), 4);
    str_ZJ = StrConcat2(Translate("zj"), str_ZJ);
    arr_ParameterList.AddAsLast(str_ZJ);
    flt_ZY = i_flt_ZSpeed * 10;
    int_ZY = MthCeiling(flt_ZY);
    str_ZY = StrConcat2(int_ZY, Translate(""));
    str_ZY = StrFillLeft(str_ZY, Translate("0"), 4);
    str_ZY = StrConcat2(Translate("zy"), str_ZY);
    arr_ParameterList.AddAsLast(str_ZY);
    flt_yo = i_flt_SearchWidth * 10;
    int_yo = MthCeiling(flt_yo);
    str_yo = StrConcat2(int_yo, Translate(""));
    str_yo = StrFillLeft(str_yo, Translate("0"), 4);
    str_yo = StrConcat2(Translate("yo"), str_yo);
    arr_ParameterList.AddAsLast(str_yo);
    flt_OpenWidth = i_flt_SearchWidth + 1.0;
    flt_yg = flt_OpenWidth * 10;
    int_yg = MthCeiling(flt_yg);
    str_yg = StrConcat2(int_yg, Translate(""));
    str_yg = StrFillLeft(str_yg, Translate("0"), 4);
    str_yg = StrConcat2(Translate("yg"), str_yg);
    arr_ParameterList.AddAsLast(str_yg);
    str_YW = Translate("yw20");
    arr_ParameterList.AddAsLast(str_YW);
    flt_th = i_flt_MinimumTraverseHeightBegining * 10;
    int_th = MthCeiling(flt_th);
    str_th = StrConcat2(int_th, Translate(""));
    str_th = StrFillLeft(str_th, Translate("0"), 4);
    str_th = StrConcat2(Translate("th"), str_th);
    arr_ParameterList.AddAsLast(str_th);
    flt_te = i_flt_MinimumTraverseHeightEnding * 10;
    int_te = MthCeiling(flt_te);
    str_te = StrConcat2(int_te, Translate(""));
    str_te = StrFillLeft(str_te, Translate("0"), 4);
    str_te = StrConcat2(Translate("te"), str_te);
    arr_ParameterList.AddAsLast(str_te);
    int_TotalParameters=arr_ParameterList.GetSize();
    str_BackChannel = StrConcat2(i_int_BackChannel, Translate(""));
    str_BackChannel = StrFillLeft(str_BackChannel, Translate("0"), 2);
    str_FrontChannel = StrConcat2(i_int_FrontChannel, Translate(""));
    str_FrontChannel = StrFillLeft(str_FrontChannel, Translate("0"), 2);
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_Parameters = StrConcat2(str_Parameters, arr_ParameterList.ElementAt( i -1));
      }
    }
    str_Parameters = StrConcat8(str_Parameters, Translate("pa"), str_BackChannel, Translate("pb"), str_FrontChannel, Translate(""), Translate(""), Translate(""));
    str_FWCommandSet = Translate("C0ZO");
    str_ParameterSet = StrConcat8(Translate("pa"), str_BackChannel, Translate("pb"), str_FrontChannel, Translate(""), Translate(""), Translate(""), Translate(""));
    Trace("FW Command Set Channels:  ",str_FWCommandSet," : ",str_ParameterSet);
    Trace("FW Command:  ",str_FWCommand," : ",str_Parameters);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("er"), 1, 2, bool_ParamFound, int_ErrorCode);
    if (int_ErrorCode != 0)
    {
      ret_WallFound = 1;
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    return (ret_WallFound);
  }

  function GetStopDiskZCoord( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_ZCoord ) void {
    private variable str_FW_ReturnPosition;
    private variable str_ReturnValue;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable str_FirmwareCMND;
    private variable int_FW_Position;
    private variable flt_Resolution_Z;
    private variable flt_ReturnValue;
    o_flt_ZCoord = 0;
    flt_Resolution_Z = 0.01072765;
    FW_HELPERLIBRARY::GetChannelNumber(i_int_CurrentChannel);
    str_FirmwareCMND = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("RZ"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    if(0){
      FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rz+"), flt_Resolution_Z, 5, bol_ParameterFound, flt_ReturnValue);
    }
    str_FW_ReturnPosition = StrRight(str_ReturnValue, 5);
    int_FW_Position = StrIVal(str_FW_ReturnPosition);
    flt_ReturnValue = int_FW_Position * flt_Resolution_Z;
    flt_ReturnValue = MthRound(flt_ReturnValue, 1);
    Trace("Stop disk Z coord:  ",flt_ReturnValue);
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    o_flt_ZCoord = flt_ReturnValue;
  }

  function Get_Channel_Position( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable str_FirmwarePARAM;
    private variable strFunctionName_Cut;
    private variable str_FirmwareCMND;
    private variable bol_SimulationMode;
    private variable flt_Resolution_X;
    private variable flt_Resolution_Y;
    private variable int_Count;
    private variable flt_Resolution_Z;
    private variable str_CurrentChannel;
    private variable flt_ReturnValue;
    o_X_Coord = 0;
    o_Y_Coord = 0;
    o_Z_Coord = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    bol_SimulationMode = Util::GetSimulationMode();
    FW_HELPERLIBRARY::GetChannelNumber(i_int_CurrentChannel);
    flt_Resolution_Z = 0.1;
    flt_Resolution_Y = 0.1;
    flt_Resolution_X = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("C0RD"), Translate(""), Translate(""), Translate(""));
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwarePARAM = StrConcat4(Translate("pn"), str_CurrentChannel, Translate(""), Translate(""));
    if(0){
      str_FirmwarePARAM = StrConcat4(Translate("pn"), i_int_CurrentChannel, Translate(""), Translate(""));
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rd"), flt_Resolution_Z, 4, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_Z_Coord = flt_ReturnValue;
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    str_FirmwareCMND = StrConcat4(Translate("C0RB"), Translate(""), Translate(""), Translate(""));
    if(0){
      str_FirmwarePARAM = StrConcat4(Translate("pn"), i_int_CurrentChannel, Translate(""), Translate(""));
    }
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwarePARAM = StrConcat4(Translate("pn"), str_CurrentChannel, Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rb"), flt_Resolution_Y, 4, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_Y_Coord = flt_ReturnValue;
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    str_FirmwareCMND = StrConcat4(Translate("C0"), Translate(""), Translate("RX"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rx"), flt_Resolution_X, 5, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_X_Coord = flt_ReturnValue;
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    Trace("   Current X Position:  ",o_X_Coord);
    Trace("   Current Y Position:  ",o_Y_Coord);
    Trace("   Current Z Position:  ",o_Z_Coord);
  }

  function Move_Channels_To_Absolute_Position( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable i_flt_X_Position, variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void {
    private variable i_int_X_Position;
    private variable int_SafeTravelHeight;
    private variable str_ReturnValue;
    private variable flt_SafeTravelHeight;
    private variable int_CutNum;
    private variable str_Y_Position;
    private variable str_FWParameter;
    private variable int_Length;
    private variable int_Y_Position;
    private variable str_TH;
    private variable i;
    private variable strFunctionName;
    private variable str_ZP;
    private variable str_FWCommand;
    private variable int_TotalParameters;
    private variable flt_Y_Position;
    private variable str_YP;
    private variable str_Z_Position;
    private variable strFunctionName_Cut;
    private variable str_XP;
    private variable int_Z_Position;
    private variable str_TM;
    private variable flt_Z_Position;
    private variable int_TotalChannels;
    private variable int_Count;
    private variable int_TotalYValues;
    private variable str_ChValue;
    private variable int_TotalZValues;
    private variable i_str_X_Position;
    private variable int_ChValue;
    private variable int_ChPatternLength;
    private variable str_SafeTravelHeight;
    private variable int_ChIndex;
    private variable arr_Parameters[];
    private variable arr_ChPattern[];
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    i_str_ChannelPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    int_ChPatternLength = StrGetLength(i_str_ChannelPattern);
    if (int_ChPatternLength < int_TotalChannels)
    {
      Trace("Channel Pattern:  ",i_str_ChannelPattern);
      ErrRaise(101, Translate("Channel pattern is less than the total number of channels on the system!"));
    }
    int_TotalYValues=i_arr_Y_Position.GetSize();
    if (int_TotalYValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Y Values"), i_arr_Y_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Y Positions"));
    }
    int_TotalZValues=i_arr_Z_Position.GetSize();
    if (int_TotalZValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Z Values"), i_arr_Z_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Z Positions"));
    }
    flt_SafeTravelHeight = i_flt_MinimumZHeightAtBegining;
    str_FWCommand = Translate("C0JM");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tm");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xp");
    i_flt_X_Position = i_flt_X_Position * 10;
    if(0){
      i_int_X_Position = MthCeiling(i_flt_X_Position);
    }
    i_int_X_Position = MthFloor(i_flt_X_Position);
    i_str_X_Position = StrConcat2(i_int_X_Position, Translate(""));
    i_str_X_Position = StrFillLeft(i_str_X_Position, Translate("0"), 5);
    str_XP = StrConcat4(str_XP, i_str_X_Position, Translate("&"), Translate(""));
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalYValues;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        if(0){
          int_Y_Position = MthCeiling(flt_Y_Position);
        }
        int_Y_Position = MthFloor(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("zp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalZValues;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function Reset_Search_Z( device & ML_STAR ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
  }

  function Search_Z( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Z_Min, variable i_flt_TipLength, variable i_int_Sensitivity, variable & o_flt_Z_Found ) variable {
    private variable bool_ParamFound;
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable int_SeekHeight;
    private variable strFunctionName;
    private variable int_Channel;
    private variable flt_SeekHeight;
    private variable str_FirmwareParam;
    private variable flt_Z_MinPlusTip;
    private variable strFunctionName_Cut;
    private variable str_FirmwareCMND;
    private variable int_ErrorCode;
    private variable int_Count;
    private variable flt_Resolution_Z;
    private variable ret_WallFound;
    o_flt_Z_Found = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    int_Channel = i_int_CurrentChannel;
    FW_HELPERLIBRARY::GetChannelNumber(int_Channel);
    flt_Resolution_Z = 0.01072765;
    ret_WallFound = 0;
    flt_Z_MinPlusTip = i_flt_Z_Min + i_flt_TipLength;
    flt_SeekHeight = flt_Z_MinPlusTip / (flt_Resolution_Z * 1.0);
    int_SeekHeight = MthCeiling(flt_SeekHeight);
    if (int_SeekHeight < 12584)
    {
      int_SeekHeight = 12584;
    }
    str_FirmwareCMND = StrConcat4(Translate("P"), int_Channel, Translate("ZG"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    str_FirmwareCMND = StrConcat4(Translate("P"), int_Channel, Translate("ZG"), Translate(""));
    if(0){
      str_FirmwareParam = StrConcat4(Translate("za"), int_SeekHeight, Translate("zv01500zr005zw"), i_int_Sensitivity);
      str_FirmwareParam = StrConcat4(Translate("za"), int_SeekHeight, Translate("zv03000zr005zw"), i_int_Sensitivity);
    }
    str_FirmwareParam = StrConcat4(Translate("za"), int_SeekHeight, Translate("zv04500zr005zw"), i_int_Sensitivity);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("er"), 1, 2, bool_ParamFound, int_ErrorCode);
    if (int_ErrorCode != 0)
    {
      ret_WallFound = 1;
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    GetStopDiskZCoord(ML_STAR, i_int_CurrentChannel, o_flt_Z_Found);
    o_flt_Z_Found = o_flt_Z_Found - i_flt_TipLength;
    str_FirmwareCMND = StrConcat4(Translate("P"), Translate("X"), Translate("AA"), Translate(""));
    str_FirmwareParam = StrConcat8(Translate("zv12000"), Translate("zr075"), Translate("zw3"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    str_FirmwareCMND = StrConcat4(Translate("P"), int_Channel, Translate("ZG"), Translate(""));
    if(0){
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    return (ret_WallFound);
  }

  function Get_Channel_Position_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable str_FirmwarePARAM;
    private variable strFunctionName_Cut;
    private variable str_FirmwareCMND;
    private variable flt_Resolution_X;
    private variable flt_Resolution_Y;
    private variable int_Count;
    private variable str_CurrentChannel;
    private variable flt_Resolution_Z;
    private variable flt_ReturnValue;
    o_X_Coord = 0;
    o_Y_Coord = 0;
    o_Z_Coord = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    flt_Resolution_Z = 0.1;
    flt_Resolution_Y = 0.1;
    flt_Resolution_X = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("C0RD"), Translate(""), Translate(""), Translate(""));
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwarePARAM = StrConcat4(Translate("pn"), str_CurrentChannel, Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rd"), flt_Resolution_Z, 4, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_Z_Coord = flt_ReturnValue;
    }
    str_FirmwareCMND = StrConcat4(Translate("C0RB"), Translate(""), Translate(""), Translate(""));
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwarePARAM = StrConcat4(Translate("pn"), str_CurrentChannel, Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rb"), flt_Resolution_Y, 4, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_Y_Coord = flt_ReturnValue;
    }
    str_FirmwareCMND = StrConcat4(Translate("C0"), Translate(""), Translate("RX"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rx"), flt_Resolution_X, 5, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_X_Coord = flt_ReturnValue;
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("   Current X Position:  ",o_X_Coord);
    Trace("   Current Y Position:  ",o_Y_Coord);
    Trace("   Current Z Position:  ",o_Z_Coord);
  }

  function Get_Channel_Position_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable str_FirmwarePARAM;
    private variable strFunctionName_Cut;
    private variable str_FirmwareCMND;
    private variable flt_Resolution_X;
    private variable int_Count;
    private variable flt_Resolution_Y;
    private variable flt_Resolution_Z;
    private variable str_CurrentChannel;
    private variable flt_ReturnValue;
    o_X_Coord = 0;
    o_Y_Coord = 0;
    o_Z_Coord = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    flt_Resolution_Z = 0.1;
    flt_Resolution_Y = 0.1;
    flt_Resolution_X = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("C0UD"), Translate(""), Translate(""), Translate(""));
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 1);
    str_FirmwarePARAM = StrConcat4(Translate("pm"), str_CurrentChannel, Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rd"), flt_Resolution_Z, 4, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_Z_Coord = flt_ReturnValue;
    }
    str_FirmwareCMND = StrConcat4(Translate("C0UB"), Translate(""), Translate(""), Translate(""));
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 1);
    str_FirmwarePARAM = StrConcat4(Translate("pm"), str_CurrentChannel, Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rb"), flt_Resolution_Y, 4, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_Y_Coord = flt_ReturnValue;
    }
    str_FirmwareCMND = StrConcat4(Translate("C0"), Translate(""), Translate("RX"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rx"), flt_Resolution_X, 5, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_X_Coord = flt_ReturnValue;
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("   Current X Position:  ",o_X_Coord);
    Trace("   Current Y Position:  ",o_Y_Coord);
    Trace("   Current Z Position:  ",o_Z_Coord);
  }

  function Get_Tip_Present_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_bool_TipPresent ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable flt_Resolution;
    private variable int_Count;
    private variable flt_Value;
    private variable str_Firmware;
    o_bool_TipPresent = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    FW_HELPERLIBRARY::GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    o_bool_TipPresent = 0;
    flt_Resolution = 1;
    str_Firmware = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("RT"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rt"), flt_Resolution, 1, bol_ParameterFound, flt_Value);
    if (bol_ParameterFound == 1)
    {
      if (flt_Value == 1.0)
      {
        o_bool_TipPresent = 1;
      }
      else
      {
        o_bool_TipPresent = 0;
      }
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("     ","Tip Present:  ",o_bool_TipPresent);
  }

  function Get_Tip_Present_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_bool_TipPresent ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable flt_Resolution;
    private variable int_Count;
    private variable flt_Value;
    private variable str_Firmware;
    o_bool_TipPresent = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    o_bool_TipPresent = 0;
    flt_Resolution = 1;
    str_Firmware = StrConcat4(Translate("L"), i_int_CurrentChannel, Translate("RT"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rt"), flt_Resolution, 1, bol_ParameterFound, flt_Value);
    if (bol_ParameterFound == 1)
    {
      if (flt_Value == 1.0)
      {
        o_bool_TipPresent = 1;
      }
      else
      {
        o_bool_TipPresent = 0;
      }
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("     ","Tip Present:  ",o_bool_TipPresent);
  }

  function Get_Tip_Volume_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_TotalFound;
    private variable flt_Resolution;
    private variable int_Count;
    private variable str_Firmware;
    private variable arr_Values[];
    o_flt_MaxTipVolume = 0;
    o_flt_CurrentVolumeInTip = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    FW_HELPERLIBRARY::GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    o_flt_MaxTipVolume = 0.0;
    o_flt_CurrentVolumeInTip = 0.0;
    flt_Resolution = 0.046876;
    str_Firmware = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("QC"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("qc"), flt_Resolution, 5, 2, bol_ParameterFound, arr_Values);
    int_TotalFound=arr_Values.GetSize();
    if (int_TotalFound >= 1)
    {
      if (bol_ParameterFound == 1)
      {
        o_flt_MaxTipVolume = arr_Values.ElementAt( 1 -1);
        FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_MaxTipVolume);
      }
    }
    if (int_TotalFound >= 2)
    {
      if (bol_ParameterFound == 1)
      {
        o_flt_CurrentVolumeInTip = arr_Values.ElementAt( 2 -1);
        FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_CurrentVolumeInTip);
      }
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("     ","Max tip volume:  ",o_flt_MaxTipVolume," uL");
    Trace("     ","Current tip volume:  ",o_flt_CurrentVolumeInTip," uL");
  }

  function Get_Tip_Volume_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_TotalFound;
    private variable flt_Resolution;
    private variable int_Count;
    private variable str_Firmware;
    private variable arr_Values[];
    o_flt_MaxTipVolume = 0;
    o_flt_CurrentVolumeInTip = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    o_flt_MaxTipVolume = 0.0;
    o_flt_CurrentVolumeInTip = 0.0;
    flt_Resolution = 0.044711063;
    str_Firmware = StrConcat4(Translate("L"), i_int_CurrentChannel, Translate("QC"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("qc"), flt_Resolution, 5, 2, bol_ParameterFound, arr_Values);
    int_TotalFound=arr_Values.GetSize();
    if (int_TotalFound >= 1)
    {
      if (bol_ParameterFound == 1)
      {
        o_flt_MaxTipVolume = arr_Values.ElementAt( 1 -1);
        FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_MaxTipVolume);
      }
    }
    if (int_TotalFound >= 2)
    {
      if (bol_ParameterFound == 1)
      {
        o_flt_CurrentVolumeInTip = arr_Values.ElementAt( 2 -1);
        FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_CurrentVolumeInTip);
      }
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("     ","Max tip volume:  ",o_flt_MaxTipVolume," uL");
    Trace("     ","Current tip volume:  ",o_flt_CurrentVolumeInTip," uL");
  }

  function InitializeDispenseDrive_1mL( device & ML_STAR, variable i_int_CurrentChannel ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_Firmware;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    FW_HELPERLIBRARY::GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    str_Firmware = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("DI"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function InitializeDispenseDrive_5mL( device & ML_STAR, variable i_int_CurrentChannel ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_Firmware;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    FW_HELPERLIBRARY::GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    str_Firmware = StrConcat4(Translate("L"), i_int_CurrentChannel, Translate("DI"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function Move_Channels_To_Absolute_Position_1mL( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable & i_arr_X_Position[], variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void {
    private variable int_SafeTravelHeight;
    private variable str_ReturnValue;
    private variable flt_X_Position;
    private variable str_Y_Position;
    private variable flt_SafeTravelHeight;
    private variable int_CutNum;
    private variable str_FWParameter;
    private variable int_Length;
    private variable int_Y_Position;
    private variable str_TH;
    private variable i;
    private variable strFunctionName;
    private variable str_ZP;
    private variable str_FWCommand;
    private variable str_Z_Position;
    private variable flt_Y_Position;
    private variable str_YP;
    private variable int_TotalParameters;
    private variable strFunctionName_Cut;
    private variable str_XP;
    private variable int_Z_Position;
    private variable str_TM;
    private variable flt_Z_Position;
    private variable int_TotalChannels;
    private variable str_X_Position;
    private variable int_TotalXValues;
    private variable int_Count;
    private variable int_TotalYValues;
    private variable str_ChValue;
    private variable int_X_Position;
    private variable int_ChValue;
    private variable int_TotalZValues;
    private variable int_ChPatternLength;
    private variable str_SafeTravelHeight;
    private variable int_ChIndex;
    private variable arr_Parameters[];
    private variable arr_ChPattern[];
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    i_str_ChannelPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    int_ChPatternLength = StrGetLength(i_str_ChannelPattern);
    if (int_ChPatternLength < int_TotalChannels)
    {
      Trace("Channel Pattern:  ",i_str_ChannelPattern);
      ErrRaise(101, Translate("Channel pattern is less than the total number of channels on the system!"));
    }
    int_TotalXValues=i_arr_X_Position.GetSize();
    if (int_TotalXValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("X Values"), i_arr_X_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the X Positions"));
    }
    int_TotalYValues=i_arr_Y_Position.GetSize();
    if (int_TotalYValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Y Values"), i_arr_Y_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Y Positions"));
    }
    int_TotalZValues=i_arr_Z_Position.GetSize();
    if (int_TotalZValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Z Values"), i_arr_Z_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Z Positions"));
    }
    flt_SafeTravelHeight = i_flt_MinimumZHeightAtBegining;
    str_FWCommand = Translate("C0JM");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tm");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_XP = StrConcat2(str_XP, Translate(" "));
        }
        flt_X_Position=i_arr_X_Position.GetAt(int_ChIndex-1);
        flt_X_Position = flt_X_Position * 10;
        if(0){
          int_X_Position = MthCeiling(flt_X_Position);
        }
        int_X_Position = MthFloor(flt_X_Position);
        str_X_Position = StrConcat2(int_X_Position, Translate(""));
        str_X_Position = StrFillLeft(str_X_Position, Translate("0"), 5);
        str_XP = StrConcat4(str_XP, str_X_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        if(0){
          int_Y_Position = MthCeiling(flt_Y_Position);
        }
        int_Y_Position = MthFloor(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("zp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function Move_Channels_To_Absolute_Position_5mL( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable & i_arr_X_Position[], variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void {
    private variable int_SafeTravelHeight;
    private variable str_ReturnValue;
    private variable str_Y_Position;
    private variable flt_SafeTravelHeight;
    private variable int_CutNum;
    private variable flt_X_Position;
    private variable str_FWParameter;
    private variable int_Length;
    private variable int_Y_Position;
    private variable i;
    private variable str_TH;
    private variable strFunctionName;
    private variable str_ZP;
    private variable str_FWCommand;
    private variable flt_Y_Position;
    private variable str_Z_Position;
    private variable int_TotalParameters;
    private variable str_YP;
    private variable int_Z_Position;
    private variable strFunctionName_Cut;
    private variable str_XP;
    private variable str_TM;
    private variable flt_Z_Position;
    private variable int_TotalChannels;
    private variable str_X_Position;
    private variable int_TotalXValues;
    private variable int_Count;
    private variable str_ChValue;
    private variable int_TotalYValues;
    private variable int_X_Position;
    private variable int_TotalZValues;
    private variable int_ChValue;
    private variable str_SafeTravelHeight;
    private variable int_ChPatternLength;
    private variable int_ChIndex;
    private variable arr_Parameters[];
    private variable arr_ChPattern[];
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    i_str_ChannelPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    int_ChPatternLength = StrGetLength(i_str_ChannelPattern);
    if (int_ChPatternLength < int_TotalChannels)
    {
      Trace("Channel Pattern:  ",i_str_ChannelPattern);
      ErrRaise(101, Translate("Channel pattern is less than the total number of channels on the system!"));
    }
    int_TotalXValues=i_arr_X_Position.GetSize();
    if (int_TotalXValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("X Values"), i_arr_X_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the X Positions"));
    }
    int_TotalYValues=i_arr_Y_Position.GetSize();
    if (int_TotalYValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Y Values"), i_arr_Y_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Y Positions"));
    }
    int_TotalZValues=i_arr_Z_Position.GetSize();
    if (int_TotalZValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Z Values"), i_arr_Z_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Z Positions"));
    }
    flt_SafeTravelHeight = i_flt_MinimumZHeightAtBegining;
    str_FWCommand = Translate("C0LL");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tr");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xb");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_XP = StrConcat2(str_XP, Translate(" "));
        }
        flt_X_Position=i_arr_X_Position.GetAt(int_ChIndex-1);
        flt_X_Position = flt_X_Position * 10;
        if(0){
          int_X_Position = MthCeiling(flt_X_Position);
        }
        int_X_Position = MthFloor(flt_X_Position);
        str_X_Position = StrConcat2(int_X_Position, Translate(""));
        str_X_Position = StrFillLeft(str_X_Position, Translate("0"), 5);
        str_XP = StrConcat4(str_XP, str_X_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yf");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        if(0){
          int_Y_Position = MthCeiling(flt_Y_Position);
        }
        int_Y_Position = MthFloor(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("pz");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function ResetChannelFW( device & ML_STAR ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable str_FirmwareParam;
    private variable strFunctionName_Cut;
    private variable str_FirmwareCMND;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    str_FirmwareCMND = StrConcat4(Translate("P"), Translate("X"), Translate("AA"), Translate(""));
    str_FirmwareParam = StrConcat8(Translate("zv12000"), Translate("zr075"), Translate("zw3"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
  }

  function QueryTipLength( device & ML_STAR, variable i_intChannelNumber, variable & o_fltTipLength ) void {
    private variable str_ReturnValue;
    private variable bol_ParameterFound;
    private variable bln_TipPresent;
    private variable strFunctionName;
    private variable str_FirmwarePARAM;
    private variable flt_ZTipCoord;
    private variable str_FirmwareCMND;
    private variable flt_Resolution_X;
    private variable flt_Resolution_Y;
    private variable flt_ZStopDisk;
    private variable flt_Resolution_Z;
    private variable str_CurrentChannel;
    private variable flt_ReturnValue;
    o_fltTipLength = 0;
    Get_Tip_Present_1mL(ML_STAR, i_intChannelNumber, bln_TipPresent);
    if (bln_TipPresent == 0)
    {
      return;
    }
    GetStopDiskZCoord(ML_STAR, i_intChannelNumber, flt_ZStopDisk);
    flt_Resolution_Z = 0.1;
    flt_Resolution_Y = 0.1;
    flt_Resolution_X = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("C0RD"), Translate(""), Translate(""), Translate(""));
    str_CurrentChannel = StrConcat2(i_intChannelNumber, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwarePARAM = StrConcat4(Translate("pn"), str_CurrentChannel, Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rd"), flt_Resolution_Z, 4, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      flt_ZTipCoord = flt_ReturnValue;
    }
    else
    {
      flt_ZTipCoord = flt_ZStopDisk;
    }
    o_fltTipLength = flt_ZStopDisk - flt_ZTipCoord;
  }
} // library namespace
