#pragma once
#include "STAR Tools\\Resources\\SubMethods\\CHANNEL_TOOLS_GLOBAL.hsl"
#include "HSLLabwareStateLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLErrLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "SMTs\\lookup.hs_"
#include "STAR Tools\\Resources\\SubMethods\\HelperLibrary.hs_"
#include "HSLVectorDbTracking.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace SPLIT_WELLS {
  function CalcualteOffsetHeight( variable i_flt_WellAngle, variable i_flt_YOffset, variable & o_flt_ZOffset ) void ;
  function CalculateWellAngle( variable i_flt_BottomWellSegment_Height, variable i_flt_BottomWellSegment_TopWidth, variable i_flt_BottomWellSegment_BottomWidth, variable & o_flt_BottomWellSegment_Angle ) void ;
  function InitializeSplitWells(  ) void ;
  function RemoveContainers( device & ML_STAR, variable i_bool_ConsolidateVolumes ) void ;
  function SplitWellsFlatBottom( device & ML_STAR, sequence i_seq_SequenceToSplitWells, variable i_int_SequenceIndex, variable i_int_MaxWellSplit, sequence & io_seq_SpltSequence ) void ;
  function SplitWellsVBottom( device & ML_STAR, sequence i_seq_SequenceToSplitWells, variable i_int_SequenceIndex, variable i_int_MaxWellSplit, variable i_flt_ContainerBottomSegment_TopDiameter, variable i_flt_ContainerBottomSegment_BottomDiameter, variable i_flt_ContainerBottomSegment_Height, sequence & io_seq_SpltSequence ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOOKUP::_InitLibrary();
    HELPERLIBRARY::_InitLibrary();
  }
  function _ExitLibrary() {
    LOOKUP::_ExitLibrary();
    HELPERLIBRARY::_ExitLibrary();
  }

  function InitializeSplitWells(  ) void {
    SPLIT_WELLS_GLOBAL::InitializeVariables();
    SPLIT_WELLS_GLOBAL::ARR_CONTAINER_CONFIG_FILE.SetSize(0);
    SPLIT_WELLS_GLOBAL::ARR_CONTAINER_IDS.SetSize(0);
    SPLIT_WELLS_GLOBAL::ARR_CONTAINER_WIDTH.SetSize(0);
    SPLIT_WELLS_GLOBAL::ARR_LABWARE_CONFIG_FILE.SetSize(0);
    SPLIT_WELLS_GLOBAL::BOOL_LIBRARY_INITIALIZED = hslTrue;
  }

  function RemoveContainers( device & ML_STAR, variable i_bool_ConsolidateVolumes ) void {
    private variable flt_CurrentVolume;
    private variable str_LabID_Final;
    private variable str_CurrentContainer;
    private variable int_TotalContainers;
    private variable str_LabID;
    private variable flt_NewVolume;
    private variable flt_LabwareVolume;
    private variable int_Cut2;
    private variable str_PosID;
    private variable int_ContainerIndex;
    private variable int_Cut3;
    private variable int_Cut;
    private sequence seq_GetVolume;
    int_TotalContainers=SPLIT_WELLS_GLOBAL::ARR_CONTAINER_IDS.GetSize();
    {
      for(int_ContainerIndex = 0; int_ContainerIndex < int_TotalContainers;)
      {
        int_ContainerIndex = int_ContainerIndex + 1;
        str_CurrentContainer=SPLIT_WELLS_GLOBAL::ARR_CONTAINER_IDS.GetAt(int_ContainerIndex-1);
        if (i_bool_ConsolidateVolumes == 1)
        {
          SeqRemoveAll(seq_GetVolume);
          SeqAdd(seq_GetVolume, str_CurrentContainer, Translate("1"));
          seq_GetVolume.SetCurrentPosition(1);
          onerror goto errLabel_1 ;
          err.Clear();
          flt_CurrentVolume = HSLLabwState::GetLabwareVolume(ML_STAR, seq_GetVolume);
          errLabel_1 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            flt_CurrentVolume = 0.0;
          }   /* end if from skip handler if no error */
          int_Cut = StrReverseFind(str_CurrentContainer, Translate("_"));
          str_LabID = StrLeft(str_CurrentContainer, int_Cut);
          int_Cut2 = StrReverseFind(str_LabID, Translate("_"));
          str_LabID_Final = StrLeft(str_LabID, int_Cut2);
          int_Cut3 = int_Cut - int_Cut2;
          int_Cut3 = int_Cut3 - 1;
          str_PosID = StrRight(str_LabID, int_Cut3);
          SeqRemoveAll(seq_GetVolume);
          SeqAdd(seq_GetVolume, str_LabID_Final, str_PosID);
          seq_GetVolume.SetCurrentPosition(1);
          onerror goto errLabel_2 ;
          err.Clear();
          flt_LabwareVolume = HSLLabwState::GetLabwareVolume(ML_STAR, seq_GetVolume);
          errLabel_2 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            flt_LabwareVolume = 0.0;
          }   /* end if from skip handler if no error */
          flt_NewVolume = flt_LabwareVolume + flt_CurrentVolume;
          Trace("----"," New Volume for ",str_LabID_Final," ",str_PosID," = ",flt_NewVolume," uL");
          onerror goto errLabel_3 ;
          err.Clear();
          HSLLabwState::SetLabwareVolume(ML_STAR, seq_GetVolume, flt_NewVolume);
          errLabel_3 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
        }
        DevRemoveLabware(ML_STAR, str_CurrentContainer);
      }
    }
    SPLIT_WELLS_GLOBAL::ARR_CONTAINER_IDS.SetSize(0);
  }

  function CalcualteOffsetHeight( variable i_flt_WellAngle, variable i_flt_YOffset, variable & o_flt_ZOffset ) void {
    private variable flt_Calculation1;
    private variable flt_Calculation2;
    private variable flt_Radians;
    private variable flt_Pi;
    o_flt_ZOffset = 0;
    flt_Pi = 3.14159265359;
    flt_Radians = 0.0;
    flt_Radians = i_flt_WellAngle * (flt_Pi / 180);
    flt_Calculation1 = MthTan(flt_Radians);
    flt_Calculation2 = flt_Calculation1 * i_flt_YOffset;
    o_flt_ZOffset = MthRound(flt_Calculation2, 1);
  }

  function CalculateWellAngle( variable i_flt_BottomWellSegment_Height, variable i_flt_BottomWellSegment_TopWidth, variable i_flt_BottomWellSegment_BottomWidth, variable & o_flt_BottomWellSegment_Angle ) void {
    private variable flt_Angle;
    private variable flt_BottomRadius;
    private variable flt_Calculation;
    private variable flt_Pi;
    private variable flt_WellRadius;
    o_flt_BottomWellSegment_Angle = 0;
    flt_Pi = 3.14159265359;
    flt_BottomRadius = 0.0;
    if (i_flt_BottomWellSegment_BottomWidth > 0)
    {
      flt_BottomRadius = i_flt_BottomWellSegment_BottomWidth / (2 * 1.0);
    }
    flt_WellRadius = i_flt_BottomWellSegment_TopWidth / (2 * 1.0);
    if (flt_WellRadius > flt_BottomRadius)
    {
      flt_WellRadius = flt_WellRadius - flt_BottomRadius;
    }
    flt_Calculation = i_flt_BottomWellSegment_Height / (flt_WellRadius * 1.0);
    flt_Angle = MthATan(flt_Calculation);
    flt_Angle = flt_Angle * (180.0 / flt_Pi);
    o_flt_BottomWellSegment_Angle = MthRound(flt_Angle, 1);
  }

  function SplitWellsVBottom( device & ML_STAR, sequence i_seq_SequenceToSplitWells, variable i_int_SequenceIndex, variable i_int_MaxWellSplit, variable i_flt_ContainerBottomSegment_TopDiameter, variable i_flt_ContainerBottomSegment_BottomDiameter, variable i_flt_ContainerBottomSegment_Height, sequence & io_seq_SpltSequence ) void {
    private variable flt_Position_Z;
    private variable flt_X_Coord;
    private variable int_ConfigFileFound;
    private variable flt_A_Coord;
    private variable flt_Z_Coord;
    private variable flt_Y_Coord;
    private variable flt_TotalTopHalf;
    private variable int_MaxPositions_Sequence;
    private variable flt_Y_Offset;
    private variable str_SequenceIndex;
    private variable flt_Y_Center;
    private variable str_CurrentPosID;
    private variable flt_FirstContainerLocation_Y;
    private variable str_ContainerName;
    private variable flt_Z_Offset;
    private variable bol_OddContainers;
    private variable str_ConfigFile;
    private variable flt_BottomSegment_Radius;
    private variable flt_Position_A;
    private variable flt_WellBottomAngle;
    private variable flt_ContainerHoleWidth;
    private variable int_MaximumContainers;
    private variable int_TotalTopHalf;
    private variable bol_LabwareExists;
    private variable str_ConfigFile_Container;
    private variable flt_Z_Start;
    private variable flt_PositiveOffset;
    private variable int_ContainerIndex;
    private variable str_TempContainerPath;
    private variable flt_Position_X;
    private variable str_CurrentLabID;
    private variable int_Index;
    private variable str_TempRackPath;
    private variable flt_PositiveOffset_mm;
    private variable flt_Position_Y;
    private variable int_Remainder;
    private variable flt_AngleEnd;
    private variable flt_AngleStart;
    HELPERLIBRARY::GetCenterSpotLabware(str_TempRackPath);
    HELPERLIBRARY::GetCenterSpotContainer(str_TempContainerPath);
    str_SequenceIndex = StrConcat2(i_int_SequenceIndex, Translate(""));
    int_Index = StrIVal(str_SequenceIndex);
    int_MaxPositions_Sequence = SeqGetTotal(i_seq_SequenceToSplitWells);
    if (int_Index < 1)
    {
      MECC::TraceComment(Translate("=================================\nIndex is less than 1\n================================="));
      ErrRaise(101, Translate("Split_Wells - Sequence index is less than 1"));
    }
    if (int_Index > int_MaxPositions_Sequence)
    {
      MECC::TraceComment(Translate("=================================\nIndex is greater than the number of sequence positions\n================================="));
      ErrRaise(101, Translate("Split_Wells - Sequence index is greater than the positions in the sequence"));
    }
    i_seq_SequenceToSplitWells.SetCurrentPosition(i_int_SequenceIndex);
    str_CurrentLabID = SeqGetLabwareId(i_seq_SequenceToSplitWells);
    str_CurrentPosID = SeqGetPositionId(i_seq_SequenceToSplitWells);
    VectorDb_Labware::LoadLabware(ML_STAR, str_CurrentLabID, str_CurrentPosID);
    HELPERLIBRARY::GetConfigurationFile(ML_STAR, str_CurrentLabID, str_ConfigFile);
    HELPERLIBRARY::GetContainerWidth(ML_STAR, str_CurrentLabID, flt_ContainerHoleWidth);
    int_ConfigFileFound = LOOKUP::Lookup(SPLIT_WELLS_GLOBAL::ARR_LABWARE_CONFIG_FILE, str_ConfigFile);
    if (int_ConfigFileFound == 0)
    {
      HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_CurrentLabID, str_CurrentPosID, str_ConfigFile_Container);
      SPLIT_WELLS_GLOBAL::ARR_LABWARE_CONFIG_FILE.AddAsLast(str_ConfigFile);
      SPLIT_WELLS_GLOBAL::ARR_CONTAINER_CONFIG_FILE.AddAsLast(str_ConfigFile_Container);
    }
    else
    {
      str_ConfigFile_Container=SPLIT_WELLS_GLOBAL::ARR_CONTAINER_CONFIG_FILE.GetAt(int_ConfigFileFound-1);
    }
    if (str_ConfigFile_Container == "")
    {
      str_ConfigFile_Container = str_TempContainerPath;
    }
    str_ContainerName = HSLExtensions::File::GetFileNameWithoutExtension(str_ConfigFile_Container);
    Trace("");
    Trace("Container File Name:  ",str_ContainerName);
    Trace("");
    DevGetLabwarePositionEx(ML_STAR, str_CurrentLabID, str_CurrentPosID, flt_Position_X, flt_Position_Y, flt_Position_Z, flt_Position_A);
    flt_Y_Center = flt_Position_Y;
    flt_Z_Start = flt_Position_Z;
    CalculateWellAngle(i_flt_ContainerBottomSegment_Height, i_flt_ContainerBottomSegment_TopDiameter, i_flt_ContainerBottomSegment_BottomDiameter, flt_WellBottomAngle);
    if(0){
      int_MaximumContainers = flt_ContainerHoleWidth / (9 * 1.0);
    }
    int_MaximumContainers = flt_ContainerHoleWidth / 9;
    int_Remainder = flt_ContainerHoleWidth % 9;
    if (int_Remainder > 0)
    {
      int_MaximumContainers = int_MaximumContainers + 1;
    }
    if(0){
      int_MaximumContainers = MthFloor(int_MaximumContainers);
    }
    HELPERLIBRARY::ConvertToInteger(int_MaximumContainers, int_MaximumContainers);
    if (int_MaximumContainers > i_int_MaxWellSplit)
    {
      int_MaximumContainers = i_int_MaxWellSplit;
    }
    if (int_MaximumContainers == 1)
    {
      flt_PositiveOffset = 0.0;
    }
    bol_OddContainers = int_MaximumContainers % 2;
    if (bol_OddContainers == 1)
    {
      int_TotalTopHalf = int_MaximumContainers - 1;
      int_TotalTopHalf = int_TotalTopHalf / 2;
      flt_PositiveOffset_mm = int_TotalTopHalf * 9.0;
    }
    else
    {
      int_TotalTopHalf = int_MaximumContainers / 2;
      flt_TotalTopHalf = int_TotalTopHalf - 0.5;
      flt_PositiveOffset_mm = flt_TotalTopHalf * 9.0;
    }
    flt_FirstContainerLocation_Y = flt_Position_Y + flt_PositiveOffset_mm;
    Trace("    ","Maximum Containers:  ",int_MaximumContainers);
    Trace("    ","Positive Offset:  ",flt_PositiveOffset_mm);
    Trace("    ","Well Center:  ",flt_Position_Y);
    Trace("    ","First Location:  ",flt_FirstContainerLocation_Y);
    Trace("    ","Container Hole Width:  ",flt_ContainerHoleWidth);
    Trace("    ","Well Angle:  ",flt_WellBottomAngle," degrees");
    flt_Position_Y = flt_FirstContainerLocation_Y;
    flt_BottomSegment_Radius = 0.0;
    if (i_flt_ContainerBottomSegment_BottomDiameter > 0.0)
    {
      flt_BottomSegment_Radius = i_flt_ContainerBottomSegment_BottomDiameter / (2 * 1.0);
    }
    if(0){
      Trace("Bottom Segment Radius:  ",flt_BottomSegment_Radius);
    }
    flt_AngleStart = flt_Y_Center + flt_BottomSegment_Radius;
    flt_AngleEnd = flt_Y_Center - flt_BottomSegment_Radius;
    if(0){
      Trace("Angle Start Position:  ",flt_AngleStart,"  Angle End Position:  ",flt_AngleEnd);
    }
    {
      for(int_ContainerIndex = 0; int_ContainerIndex < int_MaximumContainers;)
      {
        int_ContainerIndex = int_ContainerIndex + 1;
        flt_Z_Offset = 0.0;
        flt_Y_Offset = 0.0;
        str_ContainerName = StrConcat8(str_CurrentLabID, Translate("_"), str_CurrentPosID, Translate("_"), int_ContainerIndex, Translate(""), Translate(""), Translate(""));
        bol_LabwareExists = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, str_ContainerName);
        if (bol_LabwareExists == 0)
        {
          DevAddLabware(ML_STAR, str_ContainerName, str_TempRackPath, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_A_Coord);
        }
        if (flt_Position_Y > flt_AngleStart)
        {
          flt_Y_Offset = flt_Position_Y - flt_AngleStart;
          CalcualteOffsetHeight(flt_WellBottomAngle, flt_Y_Offset, flt_Z_Offset);
        }
        if (flt_Position_Y < flt_AngleEnd)
        {
          flt_Y_Offset = flt_Position_Y - flt_AngleStart;
          flt_Y_Offset = flt_Y_Offset * -1;
          CalcualteOffsetHeight(flt_WellBottomAngle, flt_Y_Offset, flt_Z_Offset);
        }
        if(0){
          flt_Y_Offset = flt_Position_Y - flt_Y_Center;
          if (flt_Y_Offset < 0.0)
          {
            flt_Y_Offset = flt_Y_Offset * -1;
          }
          if (flt_Y_Offset > flt_BottomSegment_Radius)
          {
            flt_Y_Offset = flt_Y_Offset - flt_BottomSegment_Radius;
          }
          if (flt_Y_Offset <= 0.0)
          {
            flt_Z_Offset = 0;
          }
          else
          {
            CalcualteOffsetHeight(flt_WellBottomAngle, flt_Y_Offset, flt_Z_Offset);
          }
          flt_Position_Z = flt_Z_Start + flt_Z_Offset;
          Trace("New Z Bottom:  ",flt_Position_Z);
          Trace("Z Offset:  ",flt_Z_Offset);
          Trace("Y Offset:  ",flt_Y_Offset);
        }
        flt_Z_Offset = flt_Z_Offset * -1;
        DevAddContainerToRack(ML_STAR, str_ContainerName, Translate("1"), str_ConfigFile_Container, 0.0, 0.0, flt_Z_Offset);
        HELPERLIBRARY::SetAbsolutePositionForLabwareID(ML_STAR, str_ContainerName, flt_Position_X, flt_Position_Y, flt_Position_Z, flt_Position_A);
        flt_Position_Y = flt_Position_Y - 9.0;
        int_Index = LOOKUP::Lookup(SPLIT_WELLS_GLOBAL::ARR_CONTAINER_IDS, str_ContainerName);
        if (int_Index == 0)
        {
          SPLIT_WELLS_GLOBAL::ARR_CONTAINER_IDS.AddAsLast(str_ContainerName);
        }
        SeqAdd(io_seq_SpltSequence, str_ContainerName, Translate("1"));
      }
    }
    io_seq_SpltSequence.SetCurrentPosition(1);
  }

  function SplitWellsFlatBottom( device & ML_STAR, sequence i_seq_SequenceToSplitWells, variable i_int_SequenceIndex, variable i_int_MaxWellSplit, sequence & io_seq_SpltSequence ) void {
    private variable flt_Position_Z;
    private variable flt_X_Coord;
    private variable int_ConfigFileFound;
    private variable flt_A_Coord;
    private variable flt_Z_Coord;
    private variable flt_Y_Coord;
    private variable flt_TotalTopHalf;
    private variable flt_Y_Offset;
    private variable int_MaxPositions_Sequence;
    private variable flt_Y_Center;
    private variable str_SequenceIndex;
    private variable str_CurrentPosID;
    private variable flt_FirstContainerLocation_Y;
    private variable str_ContainerName;
    private variable flt_Z_Offset;
    private variable str_ConfigFile;
    private variable flt_Position_A;
    private variable bol_OddContainers;
    private variable flt_ContainerHoleWidth;
    private variable int_MaximumContainers;
    private variable bol_LabwareExists;
    private variable str_ConfigFile_Container;
    private variable int_TotalTopHalf;
    private variable flt_Z_Start;
    private variable int_ContainerIndex;
    private variable flt_PositiveOffset;
    private variable str_TempContainerPath;
    private variable flt_Position_X;
    private variable str_TempRackPath;
    private variable str_CurrentLabID;
    private variable flt_Position_Y;
    private variable flt_PositiveOffset_mm;
    private variable int_Index;
    private variable int_Remainder;
    HELPERLIBRARY::GetCenterSpotLabware(str_TempRackPath);
    HELPERLIBRARY::GetCenterSpotContainer(str_TempContainerPath);
    str_SequenceIndex = StrConcat2(i_int_SequenceIndex, Translate(""));
    int_Index = StrIVal(str_SequenceIndex);
    int_MaxPositions_Sequence = SeqGetTotal(i_seq_SequenceToSplitWells);
    if (int_Index < 1)
    {
      MECC::TraceComment(Translate("=================================\nIndex is less than 1\n================================="));
      ErrRaise(101, Translate("Split_Wells - Sequence index is less than 1"));
    }
    if (int_Index > int_MaxPositions_Sequence)
    {
      MECC::TraceComment(Translate("=================================\nIndex is greater than the number of sequence positions\n================================="));
      ErrRaise(101, Translate("Split_Wells - Sequence index is greater than the positions in the sequence"));
    }
    i_seq_SequenceToSplitWells.SetCurrentPosition(i_int_SequenceIndex);
    str_CurrentLabID = SeqGetLabwareId(i_seq_SequenceToSplitWells);
    str_CurrentPosID = SeqGetPositionId(i_seq_SequenceToSplitWells);
    VectorDb_Labware::LoadLabware(ML_STAR, str_CurrentLabID, Translate(""));
    HELPERLIBRARY::GetConfigurationFile(ML_STAR, str_CurrentLabID, str_ConfigFile);
    int_ConfigFileFound = LOOKUP::Lookup(SPLIT_WELLS_GLOBAL::ARR_LABWARE_CONFIG_FILE, str_ConfigFile);
    HELPERLIBRARY::GetContainerWidth(ML_STAR, str_CurrentLabID, flt_ContainerHoleWidth);
    if (int_ConfigFileFound == 0)
    {
      HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_CurrentLabID, str_CurrentPosID, str_ConfigFile_Container);
      SPLIT_WELLS_GLOBAL::ARR_LABWARE_CONFIG_FILE.AddAsLast(str_ConfigFile);
      SPLIT_WELLS_GLOBAL::ARR_CONTAINER_CONFIG_FILE.AddAsLast(str_ConfigFile_Container);
    }
    else
    {
      str_ConfigFile_Container=SPLIT_WELLS_GLOBAL::ARR_CONTAINER_CONFIG_FILE.GetAt(int_ConfigFileFound-1);
    }
    if (str_ConfigFile_Container == "")
    {
      str_ConfigFile_Container = str_TempContainerPath;
    }
    str_ContainerName = HSLExtensions::File::GetFileNameWithoutExtension(str_ConfigFile_Container);
    Trace("");
    Trace("Container File Name:  ",str_ContainerName);
    Trace("");
    DevGetLabwarePositionEx(ML_STAR, str_CurrentLabID, str_CurrentPosID, flt_Position_X, flt_Position_Y, flt_Position_Z, flt_Position_A);
    flt_Y_Center = flt_Position_Y;
    flt_Z_Start = flt_Position_Z;
    int_MaximumContainers = flt_ContainerHoleWidth / 9;
    int_Remainder = flt_ContainerHoleWidth % 9;
    if (int_Remainder > 0)
    {
      int_MaximumContainers = int_MaximumContainers + 1;
    }
    if (int_MaximumContainers > i_int_MaxWellSplit)
    {
      int_MaximumContainers = i_int_MaxWellSplit;
    }
    HELPERLIBRARY::ConvertToInteger(int_MaximumContainers, int_MaximumContainers);
    if(0){
      int_MaximumContainers = MthFloor(int_MaximumContainers);
    }
    if (int_MaximumContainers == 1)
    {
      flt_PositiveOffset = 0.0;
    }
    bol_OddContainers = int_MaximumContainers % 2;
    if (bol_OddContainers == 1)
    {
      int_TotalTopHalf = int_MaximumContainers - 1;
      int_TotalTopHalf = int_TotalTopHalf / 2;
      flt_PositiveOffset_mm = int_TotalTopHalf * 9.0;
    }
    else
    {
      int_TotalTopHalf = int_MaximumContainers / 2;
      flt_TotalTopHalf = int_TotalTopHalf - 0.5;
      flt_PositiveOffset_mm = flt_TotalTopHalf * 9.0;
    }
    flt_FirstContainerLocation_Y = flt_Position_Y + flt_PositiveOffset_mm;
    Trace("    ","Maximum Containers:  ",int_MaximumContainers);
    Trace("    ","Positive Offset:  ",flt_PositiveOffset_mm);
    Trace("    ","Well Center:  ",flt_Position_Y);
    Trace("    ","First Location:  ",flt_FirstContainerLocation_Y);
    Trace("    ","Container Hole Width:  ",flt_ContainerHoleWidth);
    flt_Position_Y = flt_FirstContainerLocation_Y;
    {
      for(int_ContainerIndex = 0; int_ContainerIndex < int_MaximumContainers;)
      {
        int_ContainerIndex = int_ContainerIndex + 1;
        str_ContainerName = StrConcat8(str_CurrentLabID, Translate("_"), str_CurrentPosID, Translate("_"), int_ContainerIndex, Translate(""), Translate(""), Translate(""));
        bol_LabwareExists = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, str_ContainerName);
        if (bol_LabwareExists == 0)
        {
          DevAddLabware(ML_STAR, str_ContainerName, str_TempRackPath, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_A_Coord);
        }
        DevAddContainerToRack(ML_STAR, str_ContainerName, Translate("1"), str_ConfigFile_Container, 0.0, 0.0, 0.0);
        flt_Y_Offset = flt_Position_Y - flt_Y_Center;
        if (flt_Y_Offset < 0.0)
        {
          flt_Y_Offset = flt_Y_Offset * -1;
        }
        flt_Z_Offset = 0;
        flt_Position_Z = flt_Z_Start + flt_Z_Offset;
        HELPERLIBRARY::SetAbsolutePositionForLabwareID(ML_STAR, str_ContainerName, flt_Position_X, flt_Position_Y, flt_Position_Z, flt_Position_A);
        flt_Position_Y = flt_Position_Y - 9.0;
        int_Index = LOOKUP::Lookup(SPLIT_WELLS_GLOBAL::ARR_CONTAINER_IDS, str_ContainerName);
        if (int_Index == 0)
        {
          SPLIT_WELLS_GLOBAL::ARR_CONTAINER_IDS.AddAsLast(str_ContainerName);
        }
        SeqAdd(io_seq_SpltSequence, str_ContainerName, Translate("1"));
      }
    }
    io_seq_SpltSequence.SetCurrentPosition(1);
  }
} // library namespace
