#pragma once
#include "HSLDevLib.hsl"
#include "STAR Tools\\Resources\\SubMethods\\HelperLibrary.hs_"
#include "HSLStrLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLExtensions\\String.hsl"
#include "HSLUtilLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TRAVEL_LANES {
  function MoveChannelsToSequencePosition( device & ML_STAR, sequence i_seq_PositionsToMove ) void ;
  function MoveChannelsToSequencePosition_5mL( device & ML_STAR, sequence i_seq_PositionsToMove ) void ;
  function MoveChannelsToTravelLanes( device & ML_STAR ) void ;
  function MoveChannelsToTravelLanes_5mL( device & ML_STAR ) void ;
  function MoveSingleChannel( device & ML_STAR, variable i_int_ChannelNumber, variable i_flt_YCoordinate ) void ;
  function MoveSingleChannel_5mL( device & ML_STAR, variable i_int_ChannelNumber, variable i_flt_YCoordinate ) void ;
  function MoveUsedChannel( device & ML_STAR, variable i_str_PipetteReturn ) void ;
  function MoveUsedChannel_5mL( device & ML_STAR, variable i_str_PipetteReturn ) void ;
  private function _ConvertToInteger( variable & io_Value ) void ;
  private function _RemoveTruncatedSequencePositions( device & Instrument, sequence & io_Sequence ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    HELPERLIBRARY::_InitLibrary();
  }
  function _ExitLibrary() {
    HELPERLIBRARY::_ExitLibrary();
  }

  function MoveChannelsToTravelLanes( device & ML_STAR ) void {
    private variable intNumberOfChannels;
    private variable flt_YRaster;
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable int_YRaster;
    private variable int_ChannelIndex;
    private variable int_SplitChannel;
    private variable flt_ChannelPosition;
    private variable str_ChannelPosition;
    private variable str_Parameter;
    private variable int_ChannelPosition;
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 0, arr_YMax, arr_YMin, flt_YRaster);
    int_YRaster = flt_YRaster * 10;
    _ConvertToInteger(int_YRaster);
    if(0){
      Util2::Debug::TraceArray_2(Translate("Y Max and Y Min"), arr_YMax, arr_YMin);
    }
    if (intNumberOfChannels < 8)
    {
      int_SplitChannel = intNumberOfChannels;
    }
    else
    {
      int_SplitChannel = intNumberOfChannels / 2;
    }
    str_Parameter = Translate("yp");
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < intNumberOfChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        if (int_ChannelIndex <= int_SplitChannel)
        {
          flt_ChannelPosition=arr_YMax.GetAt(int_ChannelIndex-1);
          if(0){
            flt_ChannelPosition = flt_ChannelPosition - 1.0;
          }
        }
        else
        {
          flt_ChannelPosition=arr_YMin.GetAt(int_ChannelIndex-1);
          if(0){
            flt_ChannelPosition = flt_ChannelPosition + 1.0;
          }
        }
        int_ChannelPosition = flt_ChannelPosition * 10;
        _ConvertToInteger(int_ChannelPosition);
        str_ChannelPosition = StrConcat2(int_ChannelPosition, Translate(""));
        str_ChannelPosition = StrFillLeft(str_ChannelPosition, Translate("0"), 4);
        str_Parameter = StrConcat8(str_Parameter, Translate(""), str_ChannelPosition, Translate(" "), Translate(""), Translate(""), Translate(""), Translate(""));
      }
    }
    str_Parameter = StrTrimRight(str_Parameter, Translate(" "));
    if(0){
      Trace("Parameter:  ",str_Parameter);
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  private function _ConvertToInteger( variable & io_Value ) void {
    io_Value = StrConcat2(io_Value, Translate(""));
    io_Value = StrIVal(io_Value);
  }

  function MoveUsedChannel( device & ML_STAR, variable i_str_PipetteReturn ) void {
    private variable flt_YRaster;
    private variable intNumberOfChannels;
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable str_LabwareID;
    private variable intNumberOfPositions;
    private variable loop_StepReturn;
    private variable str_Parameter;
    private variable int_YValue;
    private variable flt_YValue;
    private variable strChannelPositions;
    private variable arrChannelPositions[];
    private variable bool_MoveChannel;
    private variable bool_SimulationMode;
    private variable i;
    private variable flt_CurrentY;
    bool_SimulationMode = Util::GetSimulationMode();
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 0, arr_YMax, arr_YMin, flt_YRaster);
    intNumberOfPositions = StepReturn::GetNumberOfPositions(i_str_PipetteReturn);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	strChannelPositions = arrRetValues[3];
    }
    arrChannelPositions = HSLExtensions::String::Split(strChannelPositions, Translate("+"), 1);
    {
      for(loop_StepReturn = 0; loop_StepReturn < intNumberOfPositions;)
      {
        loop_StepReturn = loop_StepReturn + 1;
        i = loop_StepReturn + 1;
        str_LabwareID = StepReturn::GetLabwareId(loop_StepReturn, i_str_PipetteReturn);
        str_Parameter = Translate("");
        if (str_LabwareID != "")
        {
          bool_MoveChannel = 0;
          flt_YValue=arr_YMax.GetAt(loop_StepReturn-1);
          flt_CurrentY=arrChannelPositions.GetAt(i-1);
          flt_CurrentY = StrFVal(flt_CurrentY);
          flt_CurrentY = flt_CurrentY / (10 * 1.0);
          flt_YValue = flt_YValue - 1.0;
          if(0){
            if (bool_SimulationMode == 0)
            {
              if (flt_CurrentY < int_YValue)
              {
              }
              bool_MoveChannel = 1;
            }
            else
            {
            }
          }
          Trace("Y Max:  ",flt_YValue,"  Current Y:  ",flt_CurrentY,"  Move channel number:  ",loop_StepReturn);
          bool_MoveChannel = 1;
          if (bool_MoveChannel == 1)
          {
            MoveSingleChannel(ML_STAR, loop_StepReturn, flt_YValue);
          }
        }
      }
    }
  }

  function MoveSingleChannel( device & ML_STAR, variable i_int_ChannelNumber, variable i_flt_YCoordinate ) void {
    private variable flt_YRaster;
    private variable intNumberOfChannels;
    private variable bool_SimulationMode;
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable int_YValue;
    private variable str_PN;
    private variable flt_YValue;
    private variable str_YValue;
    private variable str_Param;
    private variable str_YParam;
    bool_SimulationMode = Util::GetSimulationMode();
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 0, arr_YMax, arr_YMin, flt_YRaster);
    if (i_int_ChannelNumber > intNumberOfChannels)
    {
      Trace("CHANNEL ",i_int_ChannelNumber," EXCEEDS NUMBER OF CHANNELS ON SYSTEM!");
      return;
    }
    if (i_flt_YCoordinate > arr_YMax.ElementAt( i_int_ChannelNumber -1))
    {
      Trace("Y COORDINATE ",i_flt_YCoordinate," IS GREATER THAN THE Y LIMIT FOR CHANNEL ",i_int_ChannelNumber,"!");
      return;
    }
    if (i_flt_YCoordinate < arr_YMin.ElementAt( i_int_ChannelNumber -1))
    {
      Trace("Y COORDINATE ",i_flt_YCoordinate," IS LESS THAN THE Y LIMIT FOR CHANNEL ",i_int_ChannelNumber,"!");
      return;
    }
    str_PN = StrConcat2(i_int_ChannelNumber, Translate(""));
    str_PN = StrFillLeft(str_PN, Translate("0"), 2);
    str_PN = StrConcat2(Translate("pn"), str_PN);
    if(0){
      flt_YValue=arr_YMax.GetAt(i_int_ChannelNumber-1);
      flt_YValue = flt_YValue - 1.0;
    }
    int_YValue = i_flt_YCoordinate * 10;
    _ConvertToInteger(int_YValue);
    str_YValue = StrConcat2(int_YValue, Translate(""));
    str_YValue = StrFillLeft(str_YValue, Translate("0"), 4);
    str_YParam = StrConcat2(Translate("yj"), str_YValue);
    str_Param = StrConcat2(str_PN, str_YParam);
    if(0){
      Trace("Parameter:  ",str_Param);
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function MoveChannelsToSequencePosition( device & ML_STAR, sequence i_seq_PositionsToMove ) void {
    private variable intNumberOfChannels;
    private variable flt_X_Coord;
    private variable flt_NotUsed;
    private variable flt_Y_Coord;
    private variable i;
    private variable str_LabID;
    private variable flt_ChannelRaster;
    private variable flt_PreviousY;
    private variable str_PosID;
    private variable int_TotalPositions;
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable arr_YMovement[];
    private variable int_RemainingChannels;
    private variable str_ChannelPosition;
    private variable flt_ChannelPosition;
    private variable str_Parameter;
    private variable int_ChannelPosition;
    private variable int_ChannelIndex;
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    _RemoveTruncatedSequencePositions(ML_STAR, i_seq_PositionsToMove);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 0, arr_YMax, arr_YMin, flt_ChannelRaster);
    int_TotalPositions = SeqGetTotal(i_seq_PositionsToMove);
    flt_PreviousY = arr_YMax.ElementAt( 1 -1);
    arr_YMovement.SetSize(0);
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        i_seq_PositionsToMove.SetCurrentPosition(i);
        str_LabID = SeqGetLabwareId(i_seq_PositionsToMove);
        str_PosID = SeqGetPositionId(i_seq_PositionsToMove);
        DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_NotUsed, flt_NotUsed);
        if (flt_Y_Coord < flt_PreviousY)
        {
          arr_YMovement.AddAsLast(flt_Y_Coord);
        }
        else
        {
          flt_Y_Coord = flt_PreviousY - flt_ChannelRaster;
          arr_YMovement.AddAsLast(flt_Y_Coord);
        }
        flt_PreviousY = flt_Y_Coord;
        if (i == intNumberOfChannels)
        {
          break;
        }
      }
    }
    int_RemainingChannels = intNumberOfChannels - i;
    if (int_RemainingChannels > 0)
    {
      {
        for(i = 0; i < int_RemainingChannels;)
        {
          i = i + 1;
          flt_Y_Coord = flt_PreviousY - flt_ChannelRaster;
          arr_YMovement.AddAsLast(flt_Y_Coord);
          flt_PreviousY = flt_Y_Coord;
        }
      }
    }
    str_Parameter = Translate("yp");
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < intNumberOfChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        flt_ChannelPosition=arr_YMovement.GetAt(int_ChannelIndex-1);
        int_ChannelPosition = flt_ChannelPosition * 10;
        _ConvertToInteger(int_ChannelPosition);
        str_ChannelPosition = StrConcat2(int_ChannelPosition, Translate(""));
        str_ChannelPosition = StrFillLeft(str_ChannelPosition, Translate("0"), 4);
        str_Parameter = StrConcat8(str_Parameter, Translate(""), str_ChannelPosition, Translate(" "), Translate(""), Translate(""), Translate(""), Translate(""));
      }
    }
    str_Parameter = StrTrimRight(str_Parameter, Translate(" "));
    Trace("C0JY :: ",str_Parameter);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  private function _RemoveTruncatedSequencePositions( device & Instrument, sequence & io_Sequence ) void {
    private variable i;
    private variable int_TotalSequencePositions;
    private variable str_LabID;
    private variable str_PosID;
    private sequence seq_AdjustedSequence;
    int_TotalSequencePositions = SeqGetTotal(io_Sequence);
    SeqRemoveAll(seq_AdjustedSequence);
    {
      for(i = 0; i < int_TotalSequencePositions;)
      {
        i = i + 1;
        str_LabID = SeqGetLabwareId(io_Sequence);
        str_PosID = SeqGetPositionId(io_Sequence);
        SeqIncrement(io_Sequence, 1);
        if (str_LabID != "")
        {
          if (str_PosID != "")
          {
            SeqAdd(seq_AdjustedSequence, str_LabID, str_PosID);
          }
        }
      }
    }
    seq_AdjustedSequence.SetCurrentPosition(1);
    SeqCopySequence(io_Sequence, seq_AdjustedSequence);
  }

  function MoveChannelsToSequencePosition_5mL( device & ML_STAR, sequence i_seq_PositionsToMove ) void {
    private variable str_ChannelPosition;
    private variable flt_X_Coord;
    private variable flt_NotUsed;
    private variable flt_Y_Coord;
    private variable int_RemainingChannels;
    private variable i;
    private variable str_LabID;
    private variable flt_ChannelPosition;
    private variable flt_ChannelRaster;
    private variable flt_PreviousY;
    private variable str_Parameter;
    private variable int_ChannelPosition;
    private variable int_ChannelIndex;
    private variable intNumberOfChannels;
    private variable str_PosID;
    private variable int_TotalPositions;
    private variable arr_YMovement[];
    private variable arr_YMin[];
    private variable arr_YMax[];
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    _RemoveTruncatedSequencePositions(ML_STAR, i_seq_PositionsToMove);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 1, arr_YMax, arr_YMin, flt_ChannelRaster);
    int_TotalPositions = SeqGetTotal(i_seq_PositionsToMove);
    flt_PreviousY = arr_YMax.ElementAt( 1 -1);
    arr_YMovement.SetSize(0);
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        i_seq_PositionsToMove.SetCurrentPosition(i);
        str_LabID = SeqGetLabwareId(i_seq_PositionsToMove);
        str_PosID = SeqGetPositionId(i_seq_PositionsToMove);
        DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_NotUsed, flt_NotUsed);
        if (flt_Y_Coord < flt_PreviousY)
        {
          arr_YMovement.AddAsLast(flt_Y_Coord);
        }
        else
        {
          flt_Y_Coord = flt_PreviousY - flt_ChannelRaster;
          arr_YMovement.AddAsLast(flt_Y_Coord);
        }
        flt_PreviousY = flt_Y_Coord;
        if (i == intNumberOfChannels)
        {
          break;
        }
      }
    }
    int_RemainingChannels = intNumberOfChannels - i;
    if (int_RemainingChannels > 0)
    {
      {
        for(i = 0; i < int_RemainingChannels;)
        {
          i = i + 1;
          flt_Y_Coord = flt_PreviousY - flt_ChannelRaster;
          arr_YMovement.AddAsLast(flt_Y_Coord);
        }
      }
    }
    str_Parameter = Translate("yf");
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < intNumberOfChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        flt_ChannelPosition=arr_YMovement.GetAt(int_ChannelIndex-1);
        int_ChannelPosition = flt_ChannelPosition * 10;
        _ConvertToInteger(int_ChannelPosition);
        str_ChannelPosition = StrConcat2(int_ChannelPosition, Translate(""));
        str_ChannelPosition = StrFillLeft(str_ChannelPosition, Translate("0"), 4);
        str_Parameter = StrConcat8(str_Parameter, Translate(""), str_ChannelPosition, Translate(" "), Translate(""), Translate(""), Translate(""), Translate(""));
      }
    }
    str_Parameter = StrTrimRight(str_Parameter, Translate(" "));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function MoveChannelsToTravelLanes_5mL( device & ML_STAR ) void {
    private variable str_ChannelPosition;
    private variable int_SplitChannel;
    private variable flt_YRaster;
    private variable flt_ChannelPosition;
    private variable str_Parameter;
    private variable int_ChannelPosition;
    private variable int_ChannelIndex;
    private variable intNumberOfChannels;
    private variable int_YRaster;
    private variable arr_YMin[];
    private variable arr_YMax[];
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 1, arr_YMax, arr_YMin, flt_YRaster);
    int_YRaster = flt_YRaster * 10;
    _ConvertToInteger(int_YRaster);
    if(0){
      Util2::Debug::TraceArray_2(Translate("Y Max and Y Min"), arr_YMax, arr_YMin);
    }
    if (intNumberOfChannels < 4)
    {
      int_SplitChannel = intNumberOfChannels;
    }
    else
    {
      int_SplitChannel = intNumberOfChannels / 2;
    }
    str_Parameter = Translate("yf");
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < intNumberOfChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        if (int_ChannelIndex <= int_SplitChannel)
        {
          flt_ChannelPosition=arr_YMax.GetAt(int_ChannelIndex-1);
          if(0){
            flt_ChannelPosition = flt_ChannelPosition - 1.0;
          }
        }
        else
        {
          flt_ChannelPosition=arr_YMin.GetAt(int_ChannelIndex-1);
          if(0){
            flt_ChannelPosition = flt_ChannelPosition + 1.0;
          }
        }
        int_ChannelPosition = flt_ChannelPosition * 10;
        _ConvertToInteger(int_ChannelPosition);
        str_ChannelPosition = StrConcat2(int_ChannelPosition, Translate(""));
        str_ChannelPosition = StrFillLeft(str_ChannelPosition, Translate("0"), 4);
        str_Parameter = StrConcat8(str_Parameter, Translate(""), str_ChannelPosition, Translate(" "), Translate(""), Translate(""), Translate(""), Translate(""));
      }
    }
    str_Parameter = StrTrimRight(str_Parameter, Translate(" "));
    if(0){
      Trace("Parameter:  ",str_Parameter);
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function MoveSingleChannel_5mL( device & ML_STAR, variable i_int_ChannelNumber, variable i_flt_YCoordinate ) void {
    private variable flt_YRaster;
    private variable str_YValue;
    private variable int_YValue;
    private variable str_Param;
    private variable str_PN;
    private variable flt_YValue;
    private variable intNumberOfChannels;
    private variable str_YParam;
    private variable bool_SimulationMode;
    private variable arr_YMin[];
    private variable arr_YMax[];
    bool_SimulationMode = Util::GetSimulationMode();
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 1, arr_YMax, arr_YMin, flt_YRaster);
    if (i_int_ChannelNumber > intNumberOfChannels)
    {
      Trace("CHANNEL ",i_int_ChannelNumber," EXCEEDS NUMBER OF CHANNELS ON SYSTEM!");
      return;
    }
    if (i_flt_YCoordinate > arr_YMax.ElementAt( i_int_ChannelNumber -1))
    {
      Trace("Y COORDINATE ",i_flt_YCoordinate," IS GREATER THAN THE Y LIMIT FOR CHANNEL ",i_int_ChannelNumber,"!");
      return;
    }
    if (i_flt_YCoordinate < arr_YMin.ElementAt( i_int_ChannelNumber -1))
    {
      Trace("Y COORDINATE ",i_flt_YCoordinate," IS LESS THAN THE Y LIMIT FOR CHANNEL ",i_int_ChannelNumber,"!");
      return;
    }
    str_PN = StrConcat2(i_int_ChannelNumber, Translate(""));
    str_PN = StrFillLeft(str_PN, Translate("0"), 2);
    str_PN = StrConcat2(Translate("pn"), str_PN);
    if(0){
      flt_YValue=arr_YMax.GetAt(i_int_ChannelNumber-1);
      flt_YValue = flt_YValue - 1.0;
    }
    int_YValue = i_flt_YCoordinate * 10;
    _ConvertToInteger(int_YValue);
    str_YValue = StrConcat2(int_YValue, Translate(""));
    str_YValue = StrFillLeft(str_YValue, Translate("0"), 4);
    str_YParam = StrConcat2(Translate("yj"), str_YValue);
    str_Param = StrConcat2(str_PN, str_YParam);
    if(0){
      Trace("Parameter:  ",str_Param);
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function MoveUsedChannel_5mL( device & ML_STAR, variable i_str_PipetteReturn ) void {
    private variable str_LabwareID;
    private variable intNumberOfPositions;
    private variable strChannelPositions;
    private variable int_YValue;
    private variable flt_YRaster;
    private variable loop_StepReturn;
    private variable str_Parameter;
    private variable flt_YValue;
    private variable intNumberOfChannels;
    private variable bool_MoveChannel;
    private variable bool_SimulationMode;
    private variable arrChannelPositions[];
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable i;
    private variable flt_CurrentY;
    bool_SimulationMode = Util::GetSimulationMode();
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 1, arr_YMax, arr_YMin, flt_YRaster);
    intNumberOfPositions = StepReturn::GetNumberOfPositions(i_str_PipetteReturn);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	strChannelPositions = arrRetValues[3];
    }
    arrChannelPositions = HSLExtensions::String::Split(strChannelPositions, Translate("+"), 1);
    {
      for(loop_StepReturn = 0; loop_StepReturn < intNumberOfPositions;)
      {
        loop_StepReturn = loop_StepReturn + 1;
        i = loop_StepReturn + 1;
        str_LabwareID = StepReturn::GetLabwareId(loop_StepReturn, i_str_PipetteReturn);
        str_Parameter = Translate("");
        if (str_LabwareID != "")
        {
          bool_MoveChannel = 0;
          flt_YValue=arr_YMax.GetAt(loop_StepReturn-1);
          flt_CurrentY=arrChannelPositions.GetAt(i-1);
          flt_CurrentY = StrFVal(flt_CurrentY);
          flt_CurrentY = flt_CurrentY / (10 * 1.0);
          flt_YValue = flt_YValue - 1.0;
          if(0){
            if (bool_SimulationMode == 0)
            {
              if (arrChannelPositions.ElementAt( loop_StepReturn -1) < int_YValue)
              {
                bool_MoveChannel = 1;
              }
            }
            else
            {
              bool_MoveChannel = 1;
            }
          }
          Trace("Y Max:  ",flt_YValue,"  Current Y:  ",flt_CurrentY,"  Move channel number:  ",loop_StepReturn);
          bool_MoveChannel = 1;
          if (bool_MoveChannel == 1)
          {
            MoveSingleChannel_5mL(ML_STAR, loop_StepReturn, flt_YValue);
          }
        }
      }
    }
  }
} // library namespace
