#pragma once
#include "HSLDevLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLErrLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLUtilLib.hsl"
#include "HSLExtensions\\String.hsl"
#include "STAR Tools\\Resources\\SubMethods\\FW_HelperLibrary.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace VANTAGE_CHANNEL_MOVEMENT_TOOLS {
  function CheckPlateWithTwoChannels( device & ML_STAR, variable i_flt_XCenter, variable i_flt_YCenter, variable i_flt_ZMinimumSearchHeight, variable i_flt_ZSpeed, variable i_flt_SearchWidth, variable i_flt_MinimumTraverseHeightBegining, variable i_flt_MinimumTraverseHeightEnding, variable i_int_BackChannel, variable i_int_FrontChannel, variable & o_flt_HeightFound ) variable ;
  function GetStopDiskZCoord( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_ZCoord ) void ;
  function Get_Channel_Position( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void ;
  function Get_Channel_Position_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void ;
  function Get_Tip_Present_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_bool_TipPresent ) void ;
  function Get_Tip_Present_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_bool_TipPresent ) void ;
  function Get_Tip_Volume_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void ;
  function Get_Tip_Volume_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void ;
  function InitializeDispenseDrive_1mL( device & ML_STAR, variable i_int_CurrentChannel ) void ;
  function InitializeDispenseDrive_5mL( device & ML_STAR, variable i_int_CurrentChannel ) void ;
  function Move_Channels_To_Absolute_Position( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable i_flt_X_Position, variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void ;
  function Move_Channels_To_Absolute_Position_1mL( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable & i_arr_X_Position[], variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void ;
  function Move_Channels_To_Absolute_Position_5mL( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable & i_arr_X_Position[], variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void ;
  function QueryTipLength( device & ML_STAR, variable i_intChannelNumber, variable & o_fltTipLength ) void ;
  function Reset_Search_Z( device & ML_STAR ) void ;
  function Search_Z( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Z_Min, variable i_flt_TipLength, variable i_int_Sensitivity, variable & o_flt_Z_Found ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    FW_HELPERLIBRARY::_InitLibrary();
  }
  function _ExitLibrary() {
    FW_HELPERLIBRARY::_ExitLibrary();
  }

  function CheckPlateWithTwoChannels( device & ML_STAR, variable i_flt_XCenter, variable i_flt_YCenter, variable i_flt_ZMinimumSearchHeight, variable i_flt_ZSpeed, variable i_flt_SearchWidth, variable i_flt_MinimumTraverseHeightBegining, variable i_flt_MinimumTraverseHeightEnding, variable i_int_BackChannel, variable i_int_FrontChannel, variable & o_flt_HeightFound ) variable {
    private variable i_int_X_Position;
    private variable bool_ParamFound;
    private variable int_SafeTravelHeight;
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable str_Y_Position;
    private variable flt_SafeTravelHeight;
    private variable str_FWParameter;
    private variable int_Length;
    private variable flt_NotUsed;
    private variable flt_ZCoordBack;
    private variable flt_ZSpeed;
    private variable int_Y_Position;
    private variable i;
    private variable str_TH;
    private variable strFunctionName;
    private variable str_ZP;
    private variable str_FWCommand;
    private variable flt_HalfDistanceY;
    private variable str_YP;
    private variable flt_ZCoordFront;
    private variable flt_Y_Position;
    private variable int_TotalParameters;
    private variable str_Z_Position;
    private variable strFunctionName_Cut;
    private variable str_XP;
    private variable int_Z_Position;
    private variable i_str_ChannelPattern;
    private variable str_TM;
    private variable flt_FrontYLocation;
    private variable flt_BackYLocation;
    private variable flt_ZIncremenToMM;
    private variable str_ZV;
    private variable flt_XCenter;
    private variable int_ErrorCode;
    private variable str_ZSpeed;
    private variable int_ZSpeed;
    private variable flt_Z_Position;
    private variable int_TotalChannels;
    private variable int_Count;
    private variable ret_WallFound;
    private variable str_ChValue;
    private variable i_str_X_Position;
    private variable int_ChValue;
    private variable str_SafeTravelHeight;
    private variable int_ChIndex;
    private variable arr_Parameters[];
    private variable arr_ChPattern[];
    private variable i_arr_Z_Position1[];
    private variable i_arr_Y_Position[];
    private variable i_arr_Z_Position2[];
    private variable i_arr_Z_Position3[];
    o_flt_HeightFound = 0;
    flt_ZIncremenToMM = 0.009765625;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    ret_WallFound = 0;
    o_flt_HeightFound = 0.0;
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    i_str_ChannelPattern = Translate("");
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        arr_ChPattern.AddAsLast(0);
      }
    }
    arr_ChPattern.SetAt(i_int_BackChannel-1, 1);
    arr_ChPattern.SetAt(i_int_FrontChannel-1, 1);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        i_str_ChannelPattern = StrConcat2(i_str_ChannelPattern, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    i_arr_Y_Position.SetSize(0);
    i_arr_Z_Position1.SetSize(0);
    i_arr_Z_Position2.SetSize(0);
    i_arr_Z_Position3.SetSize(0);
    flt_HalfDistanceY = i_flt_SearchWidth / (2 * 1.0);
    flt_BackYLocation = i_flt_YCenter + flt_HalfDistanceY;
    flt_FrontYLocation = i_flt_YCenter - flt_HalfDistanceY;
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        i_arr_Y_Position.AddAsLast(0.0);
        i_arr_Z_Position1.AddAsLast(0.0);
        i_arr_Z_Position2.AddAsLast(0.0);
        i_arr_Z_Position3.AddAsLast(0.0);
      }
    }
    i_arr_Y_Position.SetAt(i_int_BackChannel-1, flt_BackYLocation);
    i_arr_Y_Position.SetAt(i_int_FrontChannel-1, flt_FrontYLocation);
    i_arr_Z_Position1.SetAt(i_int_BackChannel-1, i_flt_MinimumTraverseHeightBegining);
    i_arr_Z_Position1.SetAt(i_int_FrontChannel-1, i_flt_MinimumTraverseHeightBegining);
    i_arr_Z_Position2.SetAt(i_int_BackChannel-1, i_flt_ZMinimumSearchHeight);
    i_arr_Z_Position2.SetAt(i_int_FrontChannel-1, i_flt_ZMinimumSearchHeight);
    i_arr_Z_Position3.SetAt(i_int_BackChannel-1, i_flt_MinimumTraverseHeightEnding);
    i_arr_Z_Position3.SetAt(i_int_FrontChannel-1, i_flt_MinimumTraverseHeightEnding);
    MECC::TraceComment(Translate("Move to start position"));
    flt_SafeTravelHeight = i_flt_MinimumTraverseHeightBegining;
    flt_XCenter = i_flt_XCenter;
    str_FWCommand = Translate("C0JM");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tm");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xp");
    flt_XCenter = flt_XCenter * 10;
    i_int_X_Position = MthCeiling(flt_XCenter);
    i_str_X_Position = StrConcat2(i_int_X_Position, Translate(""));
    i_str_X_Position = StrFillLeft(i_str_X_Position, Translate("0"), 5);
    str_XP = StrConcat4(str_XP, i_str_X_Position, Translate("&"), Translate(""));
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        int_Y_Position = MthCeiling(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("zp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position1.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    MECC::TraceComment(Translate("Change Z speed and sensitivity"));
    flt_ZSpeed = i_flt_ZSpeed / (flt_ZIncremenToMM * 1.0);
    int_ZSpeed = MthCeiling(flt_ZSpeed);
    str_ZSpeed = StrConcat2(int_ZSpeed, Translate(""));
    str_ZSpeed = StrFillLeft(str_ZSpeed, Translate("0"), 5);
    str_ZV = StrConcat4(Translate("zv"), str_ZSpeed, Translate(""), Translate(""));
    if(0){
      str_FWCommand = StrConcat8(Translate("A1PXZGzr150000zw0010za34600"), str_ZV, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    str_FWCommand = StrConcat8(Translate("A1PXAAzr150000zw0100za34600"), str_ZV, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace("FW Command:  ",str_FWCommand);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    MECC::TraceComment(Translate("Move to tap position"));
    flt_SafeTravelHeight = i_flt_MinimumTraverseHeightBegining;
    flt_XCenter = i_flt_XCenter;
    str_FWCommand = Translate("C0JM");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tm");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xp");
    flt_XCenter = flt_XCenter * 10;
    i_int_X_Position = MthCeiling(flt_XCenter);
    i_str_X_Position = StrConcat2(i_int_X_Position, Translate(""));
    i_str_X_Position = StrFillLeft(i_str_X_Position, Translate("0"), 5);
    str_XP = StrConcat4(str_XP, i_str_X_Position, Translate("&"), Translate(""));
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        int_Y_Position = MthCeiling(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("zp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position2.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("er"), 1, 2, bool_ParamFound, int_ErrorCode);
    if (int_ErrorCode != 0)
    {
      ret_WallFound = 1;
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    MECC::TraceComment(Translate("Reset the speed back to normal"));
    if(0){
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    Get_Channel_Position(ML_STAR, i_int_BackChannel, flt_NotUsed, flt_NotUsed, flt_ZCoordBack);
    Get_Channel_Position(ML_STAR, i_int_FrontChannel, flt_NotUsed, flt_NotUsed, flt_ZCoordFront);
    if (flt_ZCoordBack > flt_ZCoordFront)
    {
      o_flt_HeightFound = flt_ZCoordBack;
    }
    else
    {
      o_flt_HeightFound = flt_ZCoordFront;
    }
    MECC::TraceComment(Translate("Move to final position"));
    flt_SafeTravelHeight = i_flt_MinimumTraverseHeightBegining;
    flt_XCenter = i_flt_XCenter;
    str_FWCommand = Translate("C0JM");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tm");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xp");
    flt_XCenter = flt_XCenter * 10;
    i_int_X_Position = MthCeiling(flt_XCenter);
    i_str_X_Position = StrConcat2(i_int_X_Position, Translate(""));
    i_str_X_Position = StrFillLeft(i_str_X_Position, Translate("0"), 5);
    str_XP = StrConcat4(str_XP, i_str_X_Position, Translate("&"), Translate(""));
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        int_Y_Position = MthCeiling(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("zp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position3.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    return (ret_WallFound);
  }

  function GetStopDiskZCoord( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_ZCoord ) void {
    private variable str_FW_ReturnPosition;
    private variable str_ReturnValue;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable str_FirmwareCMND;
    private variable int_FW_Position;
    private variable flt_Resolution_Z;
    private variable flt_ReturnValue;
    o_flt_ZCoord = 0;
    flt_Resolution_Z = 0.009765625;
    FW_HELPERLIBRARY::GetChannelNumber(i_int_CurrentChannel);
    str_FirmwareCMND = StrConcat4(Translate("A1P"), i_int_CurrentChannel, Translate("RZ"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    if(0){
      FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rz+"), flt_Resolution_Z, 5, bol_ParameterFound, flt_ReturnValue);
    }
    str_FW_ReturnPosition = StrRight(str_ReturnValue, 5);
    int_FW_Position = StrIVal(str_FW_ReturnPosition);
    flt_ReturnValue = int_FW_Position * flt_Resolution_Z;
    flt_ReturnValue = MthRound(flt_ReturnValue, 1);
    Trace("Stop disk Z coord:  ",flt_ReturnValue);
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    o_flt_ZCoord = flt_ReturnValue;
  }

  function Search_Z( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Z_Min, variable i_flt_TipLength, variable i_int_Sensitivity, variable & o_flt_Z_Found ) variable {
    private variable bool_ParamFound;
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable int_SeekHeight;
    private variable strFunctionName;
    private variable int_Channel;
    private variable flt_SeekHeight;
    private variable str_FirmwareParam;
    private variable flt_Z_MinPlusTip;
    private variable strFunctionName_Cut;
    private variable str_FirmwareCMND;
    private variable int_CLLD_Status;
    private variable flt_ResetPosition;
    private variable int_ErrorCode;
    private variable int_Count;
    private variable str_Position;
    private variable ret_WallFound;
    private variable flt_Resolution_Z;
    private variable Not_Used;
    private variable int_Sensitivity;
    private variable str_FWParam;
    o_flt_Z_Found = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    int_Channel = i_int_CurrentChannel;
    FW_HELPERLIBRARY::GetChannelNumber(int_Channel);
    ret_WallFound = 0;
    int_Sensitivity = 0;
    if (i_int_Sensitivity == 0)
    {
      int_Sensitivity = 50;
    }
    if (i_int_Sensitivity == 1)
    {
      int_Sensitivity = 100;
    }
    if (i_int_Sensitivity == 2)
    {
      int_Sensitivity = 200;
    }
    if (i_int_Sensitivity == 3)
    {
      int_Sensitivity = 400;
    }
    if (i_int_Sensitivity == 4)
    {
      int_Sensitivity = 600;
    }
    if (i_int_Sensitivity == 5)
    {
      int_Sensitivity = 800;
    }
    if (i_int_Sensitivity == 6)
    {
      int_Sensitivity = 1000;
    }
    if (i_int_Sensitivity == 7)
    {
      int_Sensitivity = 1200;
    }
    flt_Resolution_Z = 0.009765625;
    flt_Z_MinPlusTip = i_flt_Z_Min + i_flt_TipLength;
    flt_SeekHeight = flt_Z_MinPlusTip / (flt_Resolution_Z * 1.0);
    int_SeekHeight = MthCeiling(flt_SeekHeight);
    if (int_SeekHeight < 14541)
    {
      int_SeekHeight = 14541;
    }
    int_Sensitivity = StrConcat2(int_Sensitivity, Translate(""));
    int_Sensitivity = StrFillLeft(int_Sensitivity, Translate("0"), 4);
    if(0){
      str_FirmwareParam = StrConcat4(Translate("za"), int_SeekHeight, Translate("zv01648zr005000zw"), int_Sensitivity);
    }
    str_FirmwareParam = StrConcat4(Translate("za"), int_SeekHeight, Translate("zv02000zr150000zw"), int_Sensitivity);
    str_FirmwareCMND = StrConcat4(Translate("A1P"), int_Channel, Translate("ZG"), str_FirmwareParam);
    Trace("Search for Z:  ",str_FirmwareCMND);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("er"), 1, 2, bool_ParamFound, int_ErrorCode);
    if (int_ErrorCode != 0)
    {
      ret_WallFound = 1;
    }
    if(0){
      Get_Channel_Position(ML_STAR, i_int_CurrentChannel, Not_Used, Not_Used, o_flt_Z_Found);
    }
    GetStopDiskZCoord(ML_STAR, i_int_CurrentChannel, o_flt_Z_Found);
    o_flt_Z_Found = o_flt_Z_Found - i_flt_TipLength;
    Trace("CLLD Status:  ",int_CLLD_Status);
    Trace("Z Position found:  ",o_flt_Z_Found);
    if(0){
      flt_ResetPosition = o_flt_Z_Found + i_flt_TipLength;
      flt_ResetPosition = flt_ResetPosition / (flt_Resolution_Z * 1.0);
      flt_ResetPosition = MthRound(flt_ResetPosition, 0);
      str_Position = StrConcat2(flt_ResetPosition, Translate(""));
      str_Position = StrFillLeft(str_Position, Translate("0"), 5);
    }
    str_FirmwareParam = StrConcat8(Translate("zv25000"), Translate("zr150000"), Translate("zw1000"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    str_FirmwareCMND = StrConcat4(Translate("A1P"), int_Channel, Translate("AA"), str_FirmwareParam);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    str_FWParam = StrConcat4(Translate("A1P"), int_Channel, Translate("ZGzv25000zr150000zw1000za34600"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    return (ret_WallFound);
  }

  function Move_Channels_To_Absolute_Position( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable i_flt_X_Position, variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void {
    private variable i_int_X_Position;
    private variable int_SafeTravelHeight;
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable flt_SafeTravelHeight;
    private variable str_Y_Position;
    private variable str_FWParameter;
    private variable int_Length;
    private variable int_Y_Position;
    private variable i;
    private variable str_TH;
    private variable strFunctionName;
    private variable str_ZP;
    private variable str_FWCommand;
    private variable flt_Y_Position;
    private variable int_TotalParameters;
    private variable str_Z_Position;
    private variable str_YP;
    private variable strFunctionName_Cut;
    private variable str_XP;
    private variable int_Z_Position;
    private variable str_TM;
    private variable flt_Z_Position;
    private variable int_TotalChannels;
    private variable int_Count;
    private variable int_TotalYValues;
    private variable str_ChValue;
    private variable int_ChValue;
    private variable int_TotalZValues;
    private variable i_str_X_Position;
    private variable str_SafeTravelHeight;
    private variable int_ChIndex;
    private variable int_ChPatternLength;
    private variable arr_Parameters[];
    private variable arr_ChPattern[];
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    i_str_ChannelPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    int_ChPatternLength = StrGetLength(i_str_ChannelPattern);
    if (int_ChPatternLength < int_TotalChannels)
    {
      Trace("Channel Pattern:  ",i_str_ChannelPattern);
      ErrRaise(101, Translate("Channel pattern is less than the total number of channels on the system!"));
    }
    int_TotalYValues=i_arr_Y_Position.GetSize();
    if (int_TotalYValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Y Values"), i_arr_Y_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Y Positions"));
    }
    int_TotalZValues=i_arr_Z_Position.GetSize();
    if (int_TotalZValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Z Values"), i_arr_Z_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Z Positions"));
    }
    flt_SafeTravelHeight = i_flt_MinimumZHeightAtBegining;
    str_FWCommand = Translate("C0JM");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tm");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xp");
    i_flt_X_Position = i_flt_X_Position * 10;
    if(0){
      i_int_X_Position = MthCeiling(i_flt_X_Position);
    }
    i_int_X_Position = MthFloor(i_flt_X_Position);
    i_str_X_Position = StrConcat2(i_int_X_Position, Translate(""));
    i_str_X_Position = StrFillLeft(i_str_X_Position, Translate("0"), 5);
    str_XP = StrConcat4(str_XP, i_str_X_Position, Translate("&"), Translate(""));
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalYValues;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        if(0){
          int_Y_Position = MthCeiling(flt_Y_Position);
        }
        int_Y_Position = MthFloor(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("zp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalZValues;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function Get_Channel_Position( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable str_FirmwareCMND;
    private variable bol_SimulationMode;
    private variable int_TotalChannels;
    private variable flt_Resolution_X;
    private variable flt_Resolution_Y;
    private variable int_Count;
    private variable flt_Resolution_Z;
    private variable flt_ReturnValue;
    private variable arr_Values[];
    o_X_Coord = 0;
    o_Y_Coord = 0;
    o_Z_Coord = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    bol_SimulationMode = Util::GetSimulationMode();
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    flt_Resolution_Z = 0.1;
    flt_Resolution_Y = 0.1;
    flt_Resolution_X = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("A1PMRZ"), Translate(""), Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("rz"), flt_Resolution_Z, 4, int_TotalChannels, bol_ParameterFound, arr_Values);
    if (bol_ParameterFound == 1)
    {
      o_Z_Coord=arr_Values.GetAt(i_int_CurrentChannel-1);
    }
    str_FirmwareCMND = StrConcat4(Translate("A1PMRY"), Translate(""), Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("ry"), flt_Resolution_Y, 4, int_TotalChannels, bol_ParameterFound, arr_Values);
    if (bol_ParameterFound == 1)
    {
      o_Y_Coord=arr_Values.GetAt(i_int_CurrentChannel-1);
    }
    str_FirmwareCMND = StrConcat4(Translate("A1XMRX"), Translate(""), Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    if(0){
      FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rx"), flt_Resolution_X, 5, bol_ParameterFound, flt_ReturnValue);
    }
    FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("rx"), flt_Resolution_X, 5, 5, bol_ParameterFound, arr_Values);
    if (bol_ParameterFound == 1)
    {
      if(0){
        o_X_Coord = flt_ReturnValue;
      }
      o_X_Coord=arr_Values.GetAt(1-1);
    }
    Trace("   Current X Position:  ",o_X_Coord);
    Trace("   Current Y Position:  ",o_Y_Coord);
    Trace("   Current Z Position:  ",o_Z_Coord);
  }

  function Reset_Search_Z( device & ML_STAR ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    if(0){
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
  }

  function Move_Channels_To_Absolute_Position_1mL( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable & i_arr_X_Position[], variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void {
    private variable int_SafeTravelHeight;
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable flt_SafeTravelHeight;
    private variable flt_X_Position;
    private variable str_Y_Position;
    private variable str_FWParameter;
    private variable int_Length;
    private variable str_TH;
    private variable i;
    private variable int_Y_Position;
    private variable strFunctionName;
    private variable str_ZP;
    private variable str_FWCommand;
    private variable flt_Y_Position;
    private variable str_YP;
    private variable int_TotalParameters;
    private variable str_Z_Position;
    private variable strFunctionName_Cut;
    private variable str_XP;
    private variable int_Z_Position;
    private variable str_TM;
    private variable flt_Z_Position;
    private variable int_TotalChannels;
    private variable str_X_Position;
    private variable int_TotalXValues;
    private variable int_Count;
    private variable str_ChValue;
    private variable int_TotalYValues;
    private variable int_X_Position;
    private variable int_ChValue;
    private variable int_TotalZValues;
    private variable int_ChIndex;
    private variable str_SafeTravelHeight;
    private variable int_ChPatternLength;
    private variable arr_Parameters[];
    private variable arr_ChPattern[];
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    i_str_ChannelPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    int_ChPatternLength = StrGetLength(i_str_ChannelPattern);
    if (int_ChPatternLength < int_TotalChannels)
    {
      Trace("Channel Pattern:  ",i_str_ChannelPattern);
      ErrRaise(101, Translate("Channel pattern is less than the total number of channels on the system!"));
    }
    int_TotalXValues=i_arr_X_Position.GetSize();
    if (int_TotalXValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("X Values"), i_arr_X_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the X Positions"));
    }
    int_TotalYValues=i_arr_Y_Position.GetSize();
    if (int_TotalYValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Y Values"), i_arr_Y_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Y Positions"));
    }
    int_TotalZValues=i_arr_Z_Position.GetSize();
    if (int_TotalZValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Z Values"), i_arr_Z_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Z Positions"));
    }
    flt_SafeTravelHeight = i_flt_MinimumZHeightAtBegining;
    str_FWCommand = Translate("C0JM");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tm");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_XP = StrConcat2(str_XP, Translate(" "));
        }
        flt_X_Position=i_arr_X_Position.GetAt(int_ChIndex-1);
        flt_X_Position = flt_X_Position * 10;
        if(0){
          int_X_Position = MthCeiling(flt_X_Position);
        }
        int_X_Position = MthFloor(flt_X_Position);
        str_X_Position = StrConcat2(int_X_Position, Translate(""));
        str_X_Position = StrFillLeft(str_X_Position, Translate("0"), 5);
        str_XP = StrConcat4(str_XP, str_X_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        if(0){
          int_Y_Position = MthCeiling(flt_Y_Position);
        }
        int_Y_Position = MthFloor(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("zp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function Move_Channels_To_Absolute_Position_5mL( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable & i_arr_X_Position[], variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void {
    private variable int_SafeTravelHeight;
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable str_Y_Position;
    private variable flt_SafeTravelHeight;
    private variable flt_X_Position;
    private variable str_FWParameter;
    private variable int_Length;
    private variable str_TH;
    private variable i;
    private variable int_Y_Position;
    private variable strFunctionName;
    private variable str_ZP;
    private variable str_FWCommand;
    private variable int_TotalParameters;
    private variable str_Z_Position;
    private variable str_YP;
    private variable flt_Y_Position;
    private variable strFunctionName_Cut;
    private variable str_XP;
    private variable int_Z_Position;
    private variable str_TM;
    private variable flt_Z_Position;
    private variable int_TotalChannels;
    private variable int_TotalXValues;
    private variable int_Count;
    private variable str_X_Position;
    private variable int_TotalYValues;
    private variable str_ChValue;
    private variable int_X_Position;
    private variable int_TotalZValues;
    private variable int_ChValue;
    private variable str_SafeTravelHeight;
    private variable int_ChPatternLength;
    private variable int_ChIndex;
    private variable arr_Parameters[];
    private variable arr_ChPattern[];
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    i_str_ChannelPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    int_ChPatternLength = StrGetLength(i_str_ChannelPattern);
    if (int_ChPatternLength < int_TotalChannels)
    {
      Trace("Channel Pattern:  ",i_str_ChannelPattern);
      ErrRaise(101, Translate("Channel pattern is less than the total number of channels on the system!"));
    }
    int_TotalXValues=i_arr_X_Position.GetSize();
    if (int_TotalXValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("X Values"), i_arr_X_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the X Positions"));
    }
    int_TotalYValues=i_arr_Y_Position.GetSize();
    if (int_TotalYValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Y Values"), i_arr_Y_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Y Positions"));
    }
    int_TotalZValues=i_arr_Z_Position.GetSize();
    if (int_TotalZValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Z Values"), i_arr_Z_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Z Positions"));
    }
    flt_SafeTravelHeight = i_flt_MinimumZHeightAtBegining;
    str_FWCommand = Translate("C0LL");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tr");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xb");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_XP = StrConcat2(str_XP, Translate(" "));
        }
        flt_X_Position=i_arr_X_Position.GetAt(int_ChIndex-1);
        flt_X_Position = flt_X_Position * 10;
        if(0){
          int_X_Position = MthCeiling(flt_X_Position);
        }
        int_X_Position = MthFloor(flt_X_Position);
        str_X_Position = StrConcat2(int_X_Position, Translate(""));
        str_X_Position = StrFillLeft(str_X_Position, Translate("0"), 5);
        str_XP = StrConcat4(str_XP, str_X_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yf");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        if(0){
          int_Y_Position = MthCeiling(flt_Y_Position);
        }
        int_Y_Position = MthFloor(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("pz");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function InitializeDispenseDrive_1mL( device & ML_STAR, variable i_int_CurrentChannel ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_Firmware;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    FW_HELPERLIBRARY::GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    str_Firmware = StrConcat4(Translate("A1P"), i_int_CurrentChannel, Translate("DI"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function InitializeDispenseDrive_5mL( device & ML_STAR, variable i_int_CurrentChannel ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_Firmware;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    FW_HELPERLIBRARY::GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    str_Firmware = StrConcat4(Translate("A1L"), i_int_CurrentChannel, Translate("DI"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function Get_Channel_Position_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable str_FirmwareCMND;
    private variable bol_SimulationMode;
    private variable flt_Resolution_X;
    private variable int_TotalChannels;
    private variable flt_Resolution_Y;
    private variable int_Count;
    private variable flt_Resolution_Z;
    private variable flt_ReturnValue;
    private variable arr_Values[];
    o_X_Coord = 0;
    o_Y_Coord = 0;
    o_Z_Coord = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    bol_SimulationMode = Util::GetSimulationMode();
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    flt_Resolution_Z = 0.1;
    flt_Resolution_Y = 0.1;
    flt_Resolution_X = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("A1LMRZ"), Translate(""), Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("rz"), flt_Resolution_Z, 4, int_TotalChannels, bol_ParameterFound, arr_Values);
    if (bol_ParameterFound == 1)
    {
      o_Z_Coord=arr_Values.GetAt(i_int_CurrentChannel-1);
    }
    str_FirmwareCMND = StrConcat4(Translate("A1LMRY"), Translate(""), Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("ry"), flt_Resolution_Y, 4, int_TotalChannels, bol_ParameterFound, arr_Values);
    if (bol_ParameterFound == 1)
    {
      o_Y_Coord=arr_Values.GetAt(i_int_CurrentChannel-1);
    }
    str_FirmwareCMND = StrConcat4(Translate("A1XMRX"), Translate(""), Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 1);
    if(0){
      FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rx"), flt_Resolution_X, 5, bol_ParameterFound, flt_ReturnValue);
    }
    FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("rx"), flt_Resolution_X, 5, 5, bol_ParameterFound, arr_Values);
    if (bol_ParameterFound == 1)
    {
      if(0){
        o_X_Coord = flt_ReturnValue;
      }
      o_X_Coord=arr_Values.GetAt(1-1);
    }
    Trace("   Current X Position:  ",o_X_Coord);
    Trace("   Current Y Position:  ",o_Y_Coord);
    Trace("   Current Z Position:  ",o_Z_Coord);
  }

  function Get_Tip_Present_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_bool_TipPresent ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable flt_Resolution;
    private variable int_Count;
    private variable flt_Value;
    private variable str_Firmware;
    private variable int_TotalChannels;
    private variable str_CurrentChannel;
    private variable arr_TipsPresent[];
    o_bool_TipPresent = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    if(0){
      FW_HELPERLIBRARY::GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    }
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    o_bool_TipPresent = 0;
    flt_Resolution = 1;
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_Firmware = StrConcat4(Translate("A1P"), Translate("M"), Translate("QA"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Multiple2(str_ReturnValue, Translate("rt"), 1, bol_ParameterFound, arr_TipsPresent);
    if(0){
      FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("rt"), 1, 1, G_FW_PIP_COM_TotalChannels, bol_ParameterFound, arr_TipsPresent);
      FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rt"), flt_Resolution, 1, bol_ParameterFound, flt_Value);
    }
    if (bol_ParameterFound == 1)
    {
      int_TotalChannels=arr_TipsPresent.GetSize();
      if (i_int_CurrentChannel <= int_TotalChannels)
      {
        flt_Value=arr_TipsPresent.GetAt(i_int_CurrentChannel-1);
      }
      else
      {
        flt_Value = 0.0;
      }
      if (flt_Value == 1.0)
      {
        o_bool_TipPresent = 1;
      }
      else
      {
        o_bool_TipPresent = 0;
      }
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("     ","Tip Present:  ",o_bool_TipPresent);
  }

  function Get_Tip_Present_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_bool_TipPresent ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable flt_Resolution;
    private variable int_Count;
    private variable flt_Value;
    private variable str_Firmware;
    private variable int_TotalChannels;
    private variable arr_TipsPresent[];
    o_bool_TipPresent = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    o_bool_TipPresent = 0;
    flt_Resolution = 1;
    str_Firmware = StrConcat4(Translate("A1L"), Translate("M"), Translate("QA"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Multiple2(str_ReturnValue, Translate("rt"), 1, bol_ParameterFound, arr_TipsPresent);
    if(0){
      FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("rt"), 1, 1, G_FW_XL_COM_TotalChannels, bol_ParameterFound, arr_TipsPresent);
      FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rt"), flt_Resolution, 1, bol_ParameterFound, flt_Value);
    }
    if (bol_ParameterFound == 1)
    {
      int_TotalChannels=arr_TipsPresent.GetSize();
      if (i_int_CurrentChannel <= int_TotalChannels)
      {
        flt_Value=arr_TipsPresent.GetAt(i_int_CurrentChannel-1);
      }
      else
      {
        flt_Value = 0.0;
      }
      if (flt_Value == 1.0)
      {
        o_bool_TipPresent = 1;
      }
      else
      {
        o_bool_TipPresent = 0;
      }
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("     ","Tip Present:  ",o_bool_TipPresent);
  }

  function Get_Tip_Volume_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_TotalFound;
    private variable flt_Resolution;
    private variable int_Count;
    private variable str_Firmware;
    private variable arr_Values[];
    o_flt_MaxTipVolume = 0;
    o_flt_CurrentVolumeInTip = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    FW_HELPERLIBRARY::GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    o_flt_MaxTipVolume = 0.0;
    o_flt_CurrentVolumeInTip = 0.0;
    flt_Resolution = 0.046876;
    str_Firmware = StrConcat4(Translate("A1P"), i_int_CurrentChannel, Translate("QC"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("qc"), flt_Resolution, 5, 2, bol_ParameterFound, arr_Values);
    int_TotalFound=arr_Values.GetSize();
    if (int_TotalFound >= 1)
    {
      if (bol_ParameterFound == 1)
      {
        o_flt_MaxTipVolume = arr_Values.ElementAt( 1 -1);
        FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_MaxTipVolume);
      }
    }
    if (int_TotalFound >= 2)
    {
      if (bol_ParameterFound == 1)
      {
        o_flt_CurrentVolumeInTip = arr_Values.ElementAt( 2 -1);
        FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_CurrentVolumeInTip);
      }
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("     ","Max tip volume:  ",o_flt_MaxTipVolume," uL");
    Trace("     ","Current tip volume:  ",o_flt_CurrentVolumeInTip," uL");
  }

  function Get_Tip_Volume_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_TotalFound;
    private variable flt_Resolution;
    private variable int_Count;
    private variable str_Firmware;
    private variable arr_Values[];
    o_flt_MaxTipVolume = 0;
    o_flt_CurrentVolumeInTip = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    o_flt_MaxTipVolume = 0.0;
    o_flt_CurrentVolumeInTip = 0.0;
    flt_Resolution = 0.044711063;
    str_Firmware = StrConcat4(Translate("A1L"), i_int_CurrentChannel, Translate("QC"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("qc"), flt_Resolution, 5, 2, bol_ParameterFound, arr_Values);
    int_TotalFound=arr_Values.GetSize();
    if (int_TotalFound >= 1)
    {
      if (bol_ParameterFound == 1)
      {
        o_flt_MaxTipVolume = arr_Values.ElementAt( 1 -1);
        FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_MaxTipVolume);
      }
    }
    if (int_TotalFound >= 2)
    {
      if (bol_ParameterFound == 1)
      {
        o_flt_CurrentVolumeInTip = arr_Values.ElementAt( 2 -1);
        FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_CurrentVolumeInTip);
      }
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("     ","Max tip volume:  ",o_flt_MaxTipVolume," uL");
    Trace("     ","Current tip volume:  ",o_flt_CurrentVolumeInTip," uL");
  }

  function QueryTipLength( device & ML_STAR, variable i_intChannelNumber, variable & o_fltTipLength ) void {
    private variable str_ReturnValue;
    private variable bol_ParameterFound;
    private variable bln_TipPresent;
    private variable strFunctionName;
    private variable flt_ZTipCoord;
    private variable str_FirmwareCMND;
    private variable flt_ZStopDisk;
    private variable arr_Values[];
    o_fltTipLength = 0;
    o_fltTipLength = 0.0;
    Get_Tip_Present_1mL(ML_STAR, i_intChannelNumber, bln_TipPresent);
    if (bln_TipPresent == 0)
    {
      return;
    }
    GetStopDiskZCoord(ML_STAR, i_intChannelNumber, flt_ZStopDisk);
    str_FirmwareCMND = StrConcat4(Translate("A1PMRZ"), Translate(""), Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
    FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("rz"), 0.1, 4, G_FW_PIP_COM_TotalChannels, bol_ParameterFound, arr_Values);
    if (bol_ParameterFound == 1)
    {
      flt_ZTipCoord=arr_Values.GetAt(i_intChannelNumber-1);
    }
    else
    {
      flt_ZTipCoord = flt_ZStopDisk;
    }
    o_fltTipLength = flt_ZStopDisk - flt_ZTipCoord;
  }
} // library namespace
