#pragma once
#include "STAR Tools\\Resources\\SubMethods\\Plate Stack Verify.hs_"
#include "HSLFilLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLSeqLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLUtilLib2.hsl"
#include "STAR Tools\\Resources\\SubMethods\\Split_Wells.hs_"
#include "STAR Tools\\Resources\\SubMethods\\CHANNEL_TOOLS_GLOBAL.hsl"
#include "HSLErrLib.hsl"
#include "STAR Tools\\Resources\\SubMethods\\HelperLibrary.hs_"
#include "SMTs\\lookup.hs_"
#include "STAR Tools\\Resources\\SubMethods\\Liquid Level Check.hs_"
#include "HSLTrcLib.hsl"
#include "HSLExtensions\\Array.hsl"
#include "STAR Tools\\Resources\\SubMethods\\Travel Lanes.hs_"
#include "HSLMlStarStepReturnLib.hsl"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "HSLMthLib.hsl"
#include "HSLUtilLib.hsl"
#include "STAR Tools\\Resources\\SubMethods\\FW_HelperLibrary.hs_"
#include "STAR Tools\\Resources\\SubMethods\\STAR Channel Movement Tools.hs_"
#include "STAR Tools\\Resources\\SubMethods\\VANTAGE Channel Movement Tools.hs_"
#include "HSL_MethodHelper.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace STAR_CHANNEL_TOOLS {
  private function Abstract(  ) void ;
  function CHAN_ACCESS_Sort1Sequence( device & ML_STAR, sequence & io_Sequence_to_Sort, variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, variable & o_Channel_Pattern ) variable ;
  function CHAN_ACCESS_Sort1Sequence1Array( device & ML_STAR, sequence & io_Sequence_to_Sort, variable & io_Array_of_Variables[], variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, variable & o_Sorted_Array[], variable & o_Channel_Pattern ) variable ;
  function CHAN_ACCESS_Sort1Sequence2Arrays( device & ML_STAR, sequence & io_Sequence_to_Sort, variable & io_Array_of_Variables[], variable & io_Array_of_Variables2[], variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, variable & o_Sorted_Array[], variable & o_Sorted_Array2[], variable & o_Channel_Pattern ) variable ;
  function CHAN_ACCESS_Sort2Sequences( device & ML_STAR, sequence & io_Sequence_to_Sort, sequence & io_Sequence_to_Sort2, variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, sequence & o_Sorted_Sequence2, variable & o_Channel_Pattern ) variable ;
  function CHAN_ACCESS_Sort2Sequences1Array( device & ML_STAR, sequence & io_Sequence_to_Sort, sequence & io_Sequence_to_Sort2, variable & io_Array_of_Variables[], variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, sequence & o_Sorted_Sequence2, variable & o_Sorted_Array[], variable & o_Channel_Pattern ) variable ;
  function CHAN_ACCESS_Sort2Sequences2Arrays( device & ML_STAR, sequence & io_Sequence_to_Sort, sequence & io_Sequence_to_Sort2, variable & io_Array_of_Variables[], variable & io_Array_of_Variables2[], variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, sequence & o_Sorted_Sequence2, variable & o_Sorted_Array[], variable & o_Sorted_Array2[], variable & o_Channel_Pattern ) variable ;
  function LIQUID_LEVEL_GetLiquidLevelHeight( device & ML_STAR, variable i_str_LiquidLevelReturn, sequence i_seq_Labware, variable i_int_Channel, variable & o_flt_LiquidHeight ) void ;
  function LIQUID_LEVEL_MeasureLiquidMulti( device & ML_STAR, sequence & i_arrseq_FullReservoirSequences[], sequence & i_seq_TipsToUse, sequence i_seq_TipWaste, variable i_str_TipCounter, variable i_int_LLD_Sensitivity, variable i_bool_ConvertTouL, variable & o_arr_VolumesMeasured[] ) variable ;
  function LIQUID_LEVEL_MeasureLiquidSingle( device & ML_STAR, sequence i_seq_FullReservoirSequence, sequence & i_seq_TipsToUse, sequence i_seq_TipWaste, variable i_str_TipCounter, variable i_bool_IncrementTipSequence, variable i_int_LLD_Sensitivity, variable i_bool_ConvertTouL, variable & o_flt_VolumeMeasured ) variable ;
  function LIQUID_LEVEL_ReturnVolumesFromLiquidLevel( device & ML_STAR, variable i_str_PipettingReturn, variable i_str_LiquidLevelReturn, variable i_bool_ConvertTouL, variable & o_arr_VolumesMeasured[] ) void ;
  function MOVE_ChannelsToSequencePosition( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_Positions, variable i_flt_ZHeight ) void ;
  function MOVE_ChannelsToSequencePosition_5mL( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_Positions, variable i_flt_ZHeight ) void ;
  function MOVE_CheckPlateWithTwoChannels( device & ML_STAR, variable i_int_FrontMostChannel, sequence i_seq_PlateToCheck, variable i_flt_TapWidth ) variable ;
  function MOVE_InitDispenseDrive( device & ML_STAR, variable i_int_ChNumber ) void ;
  function MOVE_InitDispenseDrive_5mL( device & ML_STAR, variable i_int_ChNumber ) void ;
  function PLATE_STACK_CountPlateStacks( device & ML_STAR, sequence i_seq_PlateStack_Full, sequence & o_seq_PlateStack_Count, variable & o_int_PlateCount ) void ;
  function QUERY_GetChannelPosition( device & ML_STAR, variable i_int_ChNumber, variable & o_flt_XCoord, variable & o_flt_YCoord, variable & o_flt_ZCoord ) void ;
  function QUERY_GetChannelPosition_5mL( device & ML_STAR, variable i_int_ChNumber, variable & o_flt_XCoord, variable & o_flt_YCoord, variable & o_flt_ZCoord ) void ;
  function QUERY_GetTipPresentState( device & ML_STAR, variable i_int_ChNumber, variable & o_bln_TipPresent ) void ;
  function QUERY_GetTipPresentState_5mL( device & ML_STAR, variable i_int_ChNumber, variable & o_bln_TipPresent ) void ;
  function QUERY_GetTipVolume( device & ML_STAR, variable i_int_ChNumber, variable & o_flt_MaxVolume, variable & o_flt_CurrentChannelVolume ) void ;
  function QUERY_GetTipVolume_5mL( device & ML_STAR, variable i_int_ChNumber, variable & o_flt_MaxVolume, variable & o_flt_CurrentChannelVolume ) void ;
  function SPLIT_WELLS_AddContainersToWell( device & ML_STAR, sequence i_seq_SequenceToSplit, variable i_int_SequenceIndex, variable i_int_MaxSplitNumber, sequence & io_seq_SplitSequence ) void ;
  function SPLIT_WELLS_RemoveContainers( device & ML_STAR, variable i_bool_UpdateVolumes ) void ;
  function TRAVEL_LANES_MoveChannelsToTravelLanes( device & ML_STAR ) void ;
  function TRAVEL_LANES_MoveChannelsToTravelLanes_5mL( device & ML_STAR ) void ;
  function TRAVEL_LANES_MoveChannelsToYPosition( device & ML_STAR, sequence i_seq_TargetSequence, variable i_flt_XOffsetFromOrigin ) void ;
  function TRAVEL_LANES_MoveChannelsToYPosition_5mL( device & ML_STAR, sequence i_seq_TargetSequence, variable i_flt_XOffsetFromOrigin ) void ;
  function TRAVEL_LANES_MoveChannelsWithTravelLanes( device & ML_STAR, sequence i_seq_TargetSequence, variable i_flt_XOffsetFromOrigin ) void ;
  function TRAVEL_LANES_MoveChannelsWithTravelLanes_5mL( device & ML_STAR, sequence i_seq_TargetSequence, variable i_flt_XOffsetFromOrigin ) void ;
  function TRAVEL_LANES_SingleSource_ChannelDisplacement( device & ML_STAR, variable i_strStepReturn ) void ;
  function TRAVEL_LANES_SingleSource_ChannelDisplacement_5mL( device & ML_STAR, variable i_strStepReturn ) void ;
  private function _FunctionError( variable i_str_FunctionName, variable i_str_ErrorDescription ) void ;
  private function _GetSequencePosition( device & Instrument, sequence i_seq_LabwareSequence, variable & o_str_LabID, variable & o_str_PosID ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PLATE_STACK_VERIFY::_InitLibrary();
    SPLIT_WELLS::_InitLibrary();
    HELPERLIBRARY::_InitLibrary();
    LOOKUP::_InitLibrary();
    LIQUID_LEVEL_CHECK::_InitLibrary();
    TRAVEL_LANES::_InitLibrary();
    LPQ::_InitLibrary();
    FW_HELPERLIBRARY::_InitLibrary();
    STAR_CHANNEL_MOVEMENT_TOOLS::_InitLibrary();
    VANTAGE_CHANNEL_MOVEMENT_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    PLATE_STACK_VERIFY::_ExitLibrary();
    SPLIT_WELLS::_ExitLibrary();
    HELPERLIBRARY::_ExitLibrary();
    LOOKUP::_ExitLibrary();
    LIQUID_LEVEL_CHECK::_ExitLibrary();
    TRAVEL_LANES::_ExitLibrary();
    LPQ::_ExitLibrary();
    FW_HELPERLIBRARY::_ExitLibrary();
    STAR_CHANNEL_MOVEMENT_TOOLS::_ExitLibrary();
    VANTAGE_CHANNEL_MOVEMENT_TOOLS::_ExitLibrary();
  }

  function PLATE_STACK_CountPlateStacks( device & ML_STAR, sequence i_seq_PlateStack_Full, sequence & o_seq_PlateStack_Count, variable & o_int_PlateCount ) void {
    private variable strFunctionName;
    private sequence arr_PlateStack[];
    private variable arr_PlateCounts[];
    private variable str_LogFolderPath;
    private variable flt_X_Coord;
    private variable int_StackNum;
    private variable flt_Z_Coord;
    private variable flt_Y_Coord;
    private variable int_StackCount;
    private variable str_LabID;
    private variable str_PosID;
    private variable str_TempSortFile;
    private sequence seq_CurrentStack;
    private file SortFile;
    private variable i;
    private variable int_TotalInStack;
    private variable flt_NotUsed;
    private variable str_SQL_Sort;
    private variable int_StackLoop;
    private sequence seq_TempPlateStack;
    private variable int_CutNum;
    private variable int_Length;
    private variable int_Count;
    private file SortFile2;
    private variable strFunctionName_Cut;
    private variable bool_FileExists;
    { sequence __temp; o_seq_PlateStack_Count = __temp; }
    o_int_PlateCount = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    SeqRemoveAll(o_seq_PlateStack_Count);
    o_int_PlateCount = 0;
    PLATE_STACK_VERIFY::Get_Arr_StackSequences(ML_STAR, i_seq_PlateStack_Full, arr_PlateStack);
    if(0){
      str_LogFolderPath = FilGetLogFilesPath();
      str_TempSortFile = StrConcat4(str_LogFolderPath, Translate("\\"), Translate("TEMP_SORTING_FILE"), Translate(".xls"));
    }
    HELPERLIBRARY::GetTempSortingFilePath(str_TempSortFile);
    bool_FileExists = HSLExtensions::File::Exists(str_TempSortFile);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(str_TempSortFile);
    }
    if(0){
      PLATE_STACK_VERIFY::Plate_Stack_Verify(ML_STAR, arr_PlateStack, arr_PlateCounts);
    }
    PLATE_STACK_VERIFY::Plate_Stack_Verfy_V2(ML_STAR, arr_PlateStack, arr_PlateCounts);
    Util2::Debug::TraceArray(Translate("Plate Counts"), arr_PlateCounts);
    SortFile.AddField("STACK_NUM", int_StackNum, hslInteger);
    SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
    SortFile.AddField("POS_ID", str_PosID, hslString, 255);
    SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
    SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
    SortFile.AddField("Z_COORD", flt_Z_Coord, hslFloat);
    if( 0 == SortFile.Open(str_TempSortFile + " " + "SORT_FILE", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TempSortFile, "HxMetEdCompCmd");
    }
    int_StackCount=arr_PlateStack.GetSize();
    {
      for(int_StackNum = 0; int_StackNum < int_StackCount;)
      {
        int_StackNum = int_StackNum + 1;
        seq_CurrentStack=arr_PlateStack.GetAt(int_StackNum-1);
        int_TotalInStack = SeqGetTotal(seq_CurrentStack);
        {
          for(i = 0; i < int_TotalInStack;)
          {
            i = i + 1;
            seq_CurrentStack.SetCurrentPosition(i);
            str_LabID = SeqGetLabwareId(seq_CurrentStack);
            str_PosID = SeqGetPositionId(seq_CurrentStack);
            DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_NotUsed);
            if( 0 == SortFile.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
      }
    }
    if( 0 != SortFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    SortFile.RemoveFields();
    int_StackLoop=arr_PlateCounts.GetSize();
    SeqRemoveAll(seq_TempPlateStack);
    SortFile2.AddField("STACK_NUM", int_StackNum, hslInteger);
    SortFile2.AddField("LAB_ID", str_LabID, hslString, 255);
    SortFile2.AddField("POS_ID", str_PosID, hslString, 255);
    SortFile2.AddField("X_COORD", flt_X_Coord, hslFloat);
    SortFile2.AddField("Y_COORD", flt_Y_Coord, hslFloat);
    SortFile2.AddField("Z_COORD", flt_Z_Coord, hslFloat);
    if( 0 == SortFile2.Open(str_TempSortFile + " " + "SORT_FILE2", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TempSortFile, "HxMetEdCompCmd");
    }
    {
      for(i = 0; i < int_StackLoop;)
      {
        i = i + 1;
        int_StackCount=arr_PlateCounts.GetAt(i-1);
        o_int_PlateCount = o_int_PlateCount + int_StackCount;
        if (int_StackCount > 0)
        {
          str_SQL_Sort = StrConcat4(Translate("SELECT * FROM [SORT_FILE$] WHERE STACK_NUM = "), i, Translate(" ORDER BY Z_COORD ASC"), Translate(""));
          SortFile.AddField("STACK_NUM", int_StackNum, hslInteger);
          SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
          SortFile.AddField("POS_ID", str_PosID, hslString, 255);
          SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
          SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
          SortFile.AddField("Z_COORD", flt_Z_Coord, hslFloat);
          if( 0 == SortFile.Open(str_TempSortFile + " " + "SORT_FILE$", hslRead, str_SQL_Sort) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TempSortFile, "HxMetEdCompCmd");
          }
          {
            int_Count = 0;
            while (
               (SortFile.Eof() == 0)
            )
            {
              int_Count = int_Count + 1;
              if( 0 == SortFile.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == SortFile2.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (int_Count == int_StackCount)
              {
                break;
              }
            }
          }
          if( 0 != SortFile.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          SortFile.RemoveFields();
        }
      }
    }
    seq_TempPlateStack.SetCurrentPosition(1);
    str_SQL_Sort = StrConcat4(Translate("SELECT * FROM [SORT_FILE2$] "), Translate(""), Translate(" ORDER BY STACK_NUM ASC, Z_COORD DESC"), Translate(""));
    SortFile2.AddField("STACK_NUM", int_StackNum, hslInteger);
    SortFile2.AddField("LAB_ID", str_LabID, hslString, 255);
    SortFile2.AddField("POS_ID", str_PosID, hslString, 255);
    SortFile2.AddField("X_COORD", flt_X_Coord, hslFloat);
    SortFile2.AddField("Y_COORD", flt_Y_Coord, hslFloat);
    SortFile2.AddField("Z_COORD", flt_Z_Coord, hslFloat);
    if( 0 == SortFile2.Open(str_TempSortFile + " " + "SORT_FILE2$", hslRead, str_SQL_Sort) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TempSortFile, "HxMetEdCompCmd");
    }
    {
      while (
         (SortFile2.Eof() == 0)
      )
      {
        if( 0 == SortFile2.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(o_seq_PlateStack_Count, str_LabID, str_PosID);
      }
    }
    if( 0 != SortFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    SortFile2.RemoveFields();
    o_seq_PlateStack_Count.SetCurrentPosition(1);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function SPLIT_WELLS_AddContainersToWell( device & ML_STAR, sequence i_seq_SequenceToSplit, variable i_int_SequenceIndex, variable i_int_MaxSplitNumber, sequence & io_seq_SplitSequence ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable int_Count;
    private variable int_MaxPositions_Sequence;
    private variable str_SequenceIndex;
    private variable str_CurrentPosID;
    private variable int_Index;
    private variable str_CurrentLabID;
    private variable str_ConfigFile;
    private variable flt_ContainerBottomWidth;
    private variable flt_ContainerBottomHeight;
    private variable flt_ContainerTopWidth;
    private variable int_ContainerShape;
    private variable str_ContainerFile;
    private variable str_ContainerFileName;
    private variable strFunctionName_Cut;
    private variable str_KeySearch;
    private variable int_SegmentCount;
    SPLIT_WELLS_GLOBAL::InitializeVariables();
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    if (SPLIT_WELLS_GLOBAL::BOOL_LIBRARY_INITIALIZED == 0)
    {
      SPLIT_WELLS::InitializeSplitWells();
    }
    str_SequenceIndex = StrConcat2(i_int_SequenceIndex, Translate(""));
    int_Index = StrIVal(str_SequenceIndex);
    int_MaxPositions_Sequence = SeqGetTotal(i_seq_SequenceToSplit);
    if (int_Index < 1)
    {
      MECC::TraceComment(Translate("=================================\nIndex is less than 1\n================================="));
      ErrRaise(101, Translate("Split_Wells - Sequence index is less than 1"));
    }
    if (int_Index > int_MaxPositions_Sequence)
    {
      MECC::TraceComment(Translate("=================================\nIndex is greater than the number of sequence positions\n================================="));
      ErrRaise(101, Translate("Split_Wells - Sequence index is greater than the positions in the sequence"));
    }
    i_seq_SequenceToSplit.SetCurrentPosition(i_int_SequenceIndex);
    str_CurrentLabID = SeqGetLabwareId(i_seq_SequenceToSplit);
    str_CurrentPosID = SeqGetPositionId(i_seq_SequenceToSplit);
    HELPERLIBRARY::GetConfigurationFile(ML_STAR, str_CurrentLabID, str_ConfigFile);
    int_Index = LOOKUP::Lookup(SPLIT_WELLS_GLOBAL::ARR_LABWARE_CONFIG_FILE, str_ConfigFile);
    if (int_Index == 0)
    {
      HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_CurrentLabID, str_CurrentPosID, str_ContainerFile);
      str_ContainerFileName = HSLExtensions::File::GetFileNameWithoutExtension(str_ContainerFile);
      HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, Translate("Segments"), int_SegmentCount);
      HELPERLIBRARY::_ConvertToInt(int_SegmentCount);
      HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, Translate("Shape"), int_ContainerShape);
      HELPERLIBRARY::_ConvertToInt(int_ContainerShape);
      if (int_ContainerShape == 0)
      {
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".DY"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerTopWidth);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerTopWidth);
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".DY"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerBottomWidth);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerBottomWidth);
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".Max"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerBottomHeight);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerBottomHeight);
      }
      if (int_ContainerShape == 1)
      {
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".DX"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerTopWidth);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerTopWidth);
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".DY"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerBottomWidth);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerBottomWidth);
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".Max"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerBottomHeight);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerBottomHeight);
      }
      if (int_ContainerShape == 2)
      {
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".DX"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerTopWidth);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerTopWidth);
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".DY"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerBottomWidth);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerBottomWidth);
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".Max"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerBottomHeight);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerBottomHeight);
      }
      if (int_ContainerShape == 3)
      {
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".DX"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerTopWidth);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerTopWidth);
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".DY"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerBottomWidth);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerBottomWidth);
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".Max"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerBottomHeight);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerBottomHeight);
      }
      if (int_ContainerShape == 4)
      {
        flt_ContainerBottomWidth = 0.0;
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".DX"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerTopWidth);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerTopWidth);
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".Max"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerBottomHeight);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerBottomHeight);
      }
      if (int_ContainerShape == 5)
      {
        flt_ContainerBottomWidth = 0.0;
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".DX"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerTopWidth);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerTopWidth);
        str_KeySearch = StrConcat4(int_SegmentCount, Translate(".Max"), Translate(""), Translate(""));
        HELPERLIBRARY::GetDefinitionFileValue(str_ContainerFile, str_KeySearch, flt_ContainerBottomHeight);
        HELPERLIBRARY::_ConvertToFloat(flt_ContainerBottomHeight);
      }
      SPLIT_WELLS_GLOBAL::ARR_CONTAINER_SHAPE.AddAsLast(int_ContainerShape);
      SPLIT_WELLS_GLOBAL::ARR_CONTAINER_CONFIG_FILE.AddAsLast(str_ContainerFile);
      SPLIT_WELLS_GLOBAL::ARR_CONTAINER_TOP_WIDTH.AddAsLast(flt_ContainerTopWidth);
      SPLIT_WELLS_GLOBAL::ARR_CONTAINER_BOTTOM_WIDTH.AddAsLast(flt_ContainerBottomWidth);
      SPLIT_WELLS_GLOBAL::ARR_CONTAINER_BOTTOM_HEIGHT.AddAsLast(flt_ContainerBottomHeight);
    }
    else
    {
      int_ContainerShape=SPLIT_WELLS_GLOBAL::ARR_CONTAINER_SHAPE.GetAt(int_Index-1);
      flt_ContainerTopWidth=SPLIT_WELLS_GLOBAL::ARR_CONTAINER_TOP_WIDTH.GetAt(int_Index-1);
      flt_ContainerBottomWidth=SPLIT_WELLS_GLOBAL::ARR_CONTAINER_BOTTOM_WIDTH.GetAt(int_Index-1);
      flt_ContainerBottomHeight=SPLIT_WELLS_GLOBAL::ARR_CONTAINER_BOTTOM_HEIGHT.GetAt(int_Index-1);
      str_ContainerFile=SPLIT_WELLS_GLOBAL::ARR_CONTAINER_CONFIG_FILE.GetAt(int_Index-1);
    }
    if (int_ContainerShape == 0)
    {
      MECC::TraceComment(Translate("======================================\nFLAT WELLS\n======================================"));
      SPLIT_WELLS::SplitWellsFlatBottom(ML_STAR, i_seq_SequenceToSplit, i_int_SequenceIndex, i_int_MaxSplitNumber, io_seq_SplitSequence);
    }
    if (int_ContainerShape == 1)
    {
      MECC::TraceComment(Translate("======================================\nFLAT WELLS\n======================================"));
      SPLIT_WELLS::SplitWellsFlatBottom(ML_STAR, i_seq_SequenceToSplit, i_int_SequenceIndex, i_int_MaxSplitNumber, io_seq_SplitSequence);
    }
    if (int_ContainerShape == 2)
    {
      MECC::TraceComment(Translate("======================================\nFLAT WELLS\n======================================"));
      SPLIT_WELLS::SplitWellsFlatBottom(ML_STAR, i_seq_SequenceToSplit, i_int_SequenceIndex, i_int_MaxSplitNumber, io_seq_SplitSequence);
    }
    if (int_ContainerShape == 3)
    {
      MECC::TraceComment(Translate("======================================\nANGLE WELLS\n======================================"));
      SPLIT_WELLS::SplitWellsVBottom(ML_STAR, i_seq_SequenceToSplit, i_int_SequenceIndex, i_int_MaxSplitNumber, flt_ContainerTopWidth, flt_ContainerBottomWidth, flt_ContainerBottomHeight, io_seq_SplitSequence);
    }
    if (int_ContainerShape == 4)
    {
      MECC::TraceComment(Translate("======================================\nANGLE WELLS\n======================================"));
      SPLIT_WELLS::SplitWellsVBottom(ML_STAR, i_seq_SequenceToSplit, i_int_SequenceIndex, i_int_MaxSplitNumber, flt_ContainerTopWidth, flt_ContainerBottomWidth, flt_ContainerBottomHeight, io_seq_SplitSequence);
    }
    if (int_ContainerShape == 5)
    {
      MECC::TraceComment(Translate("======================================\nANGLE WELLS\n======================================"));
      SPLIT_WELLS::SplitWellsVBottom(ML_STAR, i_seq_SequenceToSplit, i_int_SequenceIndex, i_int_MaxSplitNumber, flt_ContainerTopWidth, flt_ContainerBottomWidth, flt_ContainerBottomHeight, io_seq_SplitSequence);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function SPLIT_WELLS_RemoveContainers( device & ML_STAR, variable i_bool_UpdateVolumes ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable int_Count;
    private variable strFunctionName_Cut;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    SPLIT_WELLS::RemoveContainers(ML_STAR, i_bool_UpdateVolumes);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function LIQUID_LEVEL_MeasureLiquidSingle( device & ML_STAR, sequence i_seq_FullReservoirSequence, sequence & i_seq_TipsToUse, sequence i_seq_TipWaste, variable i_str_TipCounter, variable i_bool_IncrementTipSequence, variable i_int_LLD_Sensitivity, variable i_bool_ConvertTouL, variable & o_flt_VolumeMeasured ) variable {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable int_Count;
    private variable bool_FunctionSuccessful;
    private variable strFunctionName_Cut;
    o_flt_VolumeMeasured = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    bool_FunctionSuccessful = LIQUID_LEVEL_CHECK::MeasureLiquidLevel_Single(ML_STAR, i_seq_FullReservoirSequence, i_seq_TipsToUse, i_seq_TipWaste, i_str_TipCounter, i_bool_IncrementTipSequence, i_int_LLD_Sensitivity, i_bool_ConvertTouL, o_flt_VolumeMeasured);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    return (bool_FunctionSuccessful);
  }

  function LIQUID_LEVEL_MeasureLiquidMulti( device & ML_STAR, sequence & i_arrseq_FullReservoirSequences[], sequence & i_seq_TipsToUse, sequence i_seq_TipWaste, variable i_str_TipCounter, variable i_int_LLD_Sensitivity, variable i_bool_ConvertTouL, variable & o_arr_VolumesMeasured[] ) variable {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable bool_FunctionSuccessful;
    private variable int_Count;
    private variable strFunctionName_Cut;
    o_arr_VolumesMeasured.SetSize( 0);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    bool_FunctionSuccessful = LIQUID_LEVEL_CHECK::MeasureLiquidLevel_Multi(ML_STAR, i_arrseq_FullReservoirSequences, i_seq_TipsToUse, i_seq_TipWaste, i_str_TipCounter, i_int_LLD_Sensitivity, i_bool_ConvertTouL, o_arr_VolumesMeasured);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    return (bool_FunctionSuccessful);
  }

  function LIQUID_LEVEL_GetLiquidLevelHeight( device & ML_STAR, variable i_str_LiquidLevelReturn, sequence i_seq_Labware, variable i_int_Channel, variable & o_flt_LiquidHeight ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable int_Count;
    private variable strFunctionName_Cut;
    private variable str_LabID;
    o_flt_LiquidHeight = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    LIQUID_LEVEL_CHECK::FindLiquidHeight(ML_STAR, i_str_LiquidLevelReturn, i_seq_Labware, i_int_Channel, o_flt_LiquidHeight);
    str_LabID = SeqGetLabwareId(i_seq_Labware);
    Trace("******** Liquid Level Height for ",str_LabID," is ",o_flt_LiquidHeight);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function CHAN_ACCESS_Sort1Sequence( device & ML_STAR, sequence & io_Sequence_to_Sort, variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, variable & o_Channel_Pattern ) variable {
    private variable status;
    private variable used_exclusion;
    private variable channel_raster;
    private variable num_to_sort;
    private variable in_group;
    private variable pos1;
    private variable restriction_raster;
    private variable num_used;
    private variable in_index;
    private variable update_sql;
    private variable y_min;
    private variable y_max;
    private variable ret_Number_Remaining;
    private variable num_labhand_channels;
    private variable total_channels;
    private variable file_index;
    private variable null;
    private variable restriction1;
    private variable not_used;
    private variable lab1;
    private variable sort_file;
    private variable num_1mL_channels;
    private variable prev_y_coord;
    private variable filter_sql;
    private variable count_sql;
    private variable prev_x_coord;
    private variable order_by;
    private variable num_5mL_channels;
    private variable y1;
    private variable count_value;
    private variable channel_number;
    private variable x1;
    private variable line_number;
    private variable sequence_name;
    private sequence temp_seq1;
    private file Count_Available;
    private file Update_FIle;
    private file Sort_File;
    private variable arr_Y_Min[];
    private variable arr_Y_Max[];
    private variable arr_line_numbers[];
    private variable bool_FileExists;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    { sequence __temp; o_Sorted_Sequence = __temp; }
    o_Channel_Pattern = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    num_1mL_channels = DevGetCfgValueWithKey(ML_STAR, 1);
    num_5mL_channels = DevGetCfgValueWithKey(ML_STAR, 43);
    num_labhand_channels = DevGetCfgValueWithKey(ML_STAR, 47);
    i_Channel_Type = StrConcat2(i_Channel_Type, Translate(""));
    i_Channel_Type = StrIVal(i_Channel_Type);
    if (i_Channel_Type < 0)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type > 2)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type == 0)
    {
      total_channels = num_1mL_channels;
    }
    if (i_Channel_Type == 1)
    {
      total_channels = num_5mL_channels;
    }
    if (i_Channel_Type == 2)
    {
      total_channels = num_labhand_channels;
    }
    o_Channel_Pattern = Translate("");
    if (total_channels == 0)
    {
      if (i_Channel_Type == 0)
      {
        TrcTrace(Translate("****************************  There are no 1 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 1 mL channels installed!!"));
      }
      if (i_Channel_Type == 1)
      {
        TrcTrace(Translate("****************************  There are no 5 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 5 mL channels installed!!"));
      }
      if (i_Channel_Type == 2)
      {
        TrcTrace(Translate("****************************  There are no Lab Handler channels installed!"), Translate(""));
        ErrRaise(101, Translate("No Lab Handler channels installed!!"));
      }
    }
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, io_Sequence_to_Sort);
    HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, total_channels, 0);
    i_Max_Channel = StrConcat2(i_Max_Channel, Translate(""));
    i_Max_Channel = StrIVal(i_Max_Channel);
    if (i_Max_Channel <= 0)
    {
      i_Max_Channel = total_channels;
    }
    if (i_Max_Channel > total_channels)
    {
      i_Max_Channel = total_channels;
    }
    ret_Number_Remaining = 0;
    SeqRemoveAll(o_Sorted_Sequence);
    if (i_Channel_Type == 0)
    {
      arr_Y_Max=G_ARR_FW_PIP_COM_YMax;
      arr_Y_Min=G_ARR_FW_PIP_COM_YMin;
      channel_raster = G_FW_PIP_COM_Raster;
    }
    if (i_Channel_Type == 1)
    {
      arr_Y_Max=G_ARR_FW_XL_COM_YMax;
      arr_Y_Min=G_ARR_FW_XL_COM_YMin;
      channel_raster = G_FW_XL_COM_Raster;
    }
    if (i_Channel_Type == 2)
    {
      HELPERLIBRARY::GetChannelLimits(ML_STAR, i_Channel_Type, arr_Y_Max, arr_Y_Min, channel_raster);
    }
    HELPERLIBRARY::GetTempSortingFilePath(sort_file);
    bool_FileExists = HSLExtensions::File::Exists(sort_file);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(sort_file);
    }
    num_to_sort = SeqGetTotal(io_Sequence_to_Sort);
    sequence_name = SeqGetName(io_Sequence_to_Sort);
    if (num_to_sort == 0)
    {
      return (ret_Number_Remaining);
    }
    if(0){
      TrcTrace(Translate("________________________________________________________"), Translate(""));
      TrcTrace(Translate(""), Translate(""));
      TrcTrace(Translate("           Sequence to Sort:  "), sequence_name);
      TrcTrace(Translate("           Number of Positions in Sequence:  "), num_to_sort);
      TrcTrace(Translate("           Sort by Labware:  "), i_Sort_by_Labware);
      TrcTrace(Translate("           Sort by XY:  "), i_Sort_by_XY);
      TrcTrace(Translate("           Sort for Channel Raster:  "), i_Sort_for_Channel_Raster);
      TrcTrace(Translate("           Channel Raster:  "), channel_raster);
      TrcTrace(Translate("           Maximum Channel:  "), i_Max_Channel);
      if(i_Channel_Type == 0) Trace("           Channel Type:  1 mL");
      else if(i_Channel_Type == 1) Trace("           Channel Type:  5 mL");
      else if(i_Channel_Type == 2) Trace("           Channel Type:  Labware Handler");
      TrcTrace(Translate("________________________________________________________"), Translate(""));
    }
    Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
    Sort_File.AddField("LAB1", lab1, hslString, 255);
    Sort_File.AddField("POS1", pos1, hslString, 255);
    Sort_File.AddField("LAB2", not_used, hslString, 255);
    Sort_File.AddField("POS2", not_used, hslString, 255);
    Sort_File.AddField("VAL1", not_used, hslString, 255);
    Sort_File.AddField("VAL2", not_used, hslString, 255);
    Sort_File.AddField("X1", x1, hslFloat);
    Sort_File.AddField("Y1", y1, hslFloat);
    Sort_File.AddField("X2", not_used, hslString, 255);
    Sort_File.AddField("Y2", not_used, hslString, 255);
    Sort_File.AddField("STATUS", status, hslString, 255);
    if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    not_used = Translate("-----");
    status = Translate("NOT_DONE");
    {
      for(line_number = 0; line_number < num_to_sort;)
      {
        line_number = line_number + 1;
        io_Sequence_to_Sort.SetCurrentPosition(line_number);
        lab1 = SeqGetLabwareId(io_Sequence_to_Sort);
        pos1 = SeqGetPositionId(io_Sequence_to_Sort);
        DevGetLabwarePositionEx(ML_STAR, lab1, pos1, x1, y1, null, null);
        if( 0 == Sort_File.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != Sort_File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Sort_File.RemoveFields();
    arr_line_numbers.SetSize(0);
    prev_x_coord = 0.0;
    prev_y_coord = 999.0;
    {
      for(channel_number = 0; channel_number < i_Max_Channel;)
      {
        channel_number = channel_number + 1;
        prev_y_coord = prev_y_coord - channel_raster;
        restriction_raster = StrConcat8(Translate("AND (X1"), Translate(" = "), prev_x_coord, Translate(" AND "), Translate("Y1"), Translate(" <= "), prev_y_coord, Translate(")"));
        y_max=arr_Y_Max.GetAt(channel_number-1);
        y_min=arr_Y_Min.GetAt(channel_number-1);
        restriction1 = StrConcat8(Translate("(Y1 "), Translate(">= "), y_min, Translate(" AND "), Translate("Y1 "), Translate("<= "), y_max, Translate(")"));
        num_used=arr_line_numbers.GetSize();
        if (num_used == 0)
        {
          used_exclusion = Translate("");
        }
        else
        {
          used_exclusion = StrConcat2(Translate("AND LINE_NUMBER NOT IN("), Translate(""));
          {
            for(in_index = 0; in_index < num_used;)
            {
              in_index = in_index + 1;
              line_number=arr_line_numbers.GetAt(in_index-1);
              if (in_index != 1)
              {
                used_exclusion = StrConcat2(used_exclusion, Translate(", "));
              }
              used_exclusion = StrConcat2(used_exclusion, line_number);
            }
          }
          used_exclusion = StrConcat2(used_exclusion, Translate(")"));
        }
        order_by = Translate("");
        if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY LAB1 ASC, X1 ASC, Y1 DESC";
        }
        else if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 0)
        {
             order_by = "ORDER BY LAB1 ASC, LINE_NUMBER ASC";
        }
        else if(i_Sort_by_Labware == 0 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY X1 ASC, Y1 DESC";
        }
        else
        {
             order_by = "ORDER BY LINE_NUMBER ASC";
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), restriction_raster);
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value == 0)
        {
          prev_x_coord = 0.0;
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value > 0)
        {
          filter_sql = StrConcat12(Translate("SELECT * FROM SORT WHERE "), restriction1, Translate(" "), used_exclusion, Translate(" "), order_by, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
          Sort_File.AddField("LAB1", lab1, hslString, 255);
          Sort_File.AddField("POS1", pos1, hslString, 255);
          Sort_File.AddField("LAB2", not_used, hslString, 255);
          Sort_File.AddField("POS2", not_used, hslString, 255);
          Sort_File.AddField("VAL1", not_used, hslString, 255);
          Sort_File.AddField("VAL2", not_used, hslString, 255);
          Sort_File.AddField("X1", x1, hslFloat);
          Sort_File.AddField("Y1", y1, hslFloat);
          Sort_File.AddField("X2", not_used, hslString, 255);
          Sort_File.AddField("Y2", not_used, hslString, 255);
          Sort_File.AddField("STATUS", status, hslString, 255);
          if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
          }
          {
            file_index = 0;
            while (
               (Sort_File.Eof() == 0)
            )
            {
              file_index = file_index + 1;
              if( 0 == Sort_File.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (i_Sort_for_Channel_Raster == 0)
              {
                break;
              }
              if (x1 != prev_x_coord)
              {
                break;
              }
              if (y1 <= prev_y_coord)
              {
                break;
              }
            }
          }
          if( 0 != Sort_File.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          Sort_File.RemoveFields();
          SeqAdd(o_Sorted_Sequence, lab1, pos1);
          HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, channel_number, 1);
          arr_line_numbers.AddAsLast(line_number);
          prev_x_coord = x1;
          prev_y_coord = y1;
        }
      }
    }
    o_Sorted_Sequence.SetCurrentPosition(1);
    num_used=arr_line_numbers.GetSize();
    ret_Number_Remaining = num_to_sort - num_used;
    if (num_used == 0)
    {
      TrcTrace(Translate("**********************************  The remaining positions are out of reach for the selected channels!!!!"), Translate(""));
      ErrRaise(101, Translate("The remaining positions are out of reach for all the selected channels!!!!"));
    }
    in_group = StrConcat2(Translate("LINE_NUMBER IN("), Translate(""));
    {
      for(in_index = 0; in_index < num_used;)
      {
        in_index = in_index + 1;
        line_number=arr_line_numbers.GetAt(in_index-1);
        if (in_index != 1)
        {
          in_group = StrConcat2(in_group, Translate(", "));
        }
        in_group = StrConcat2(in_group, line_number);
      }
    }
    in_group = StrConcat2(in_group, Translate(")"));
    update_sql = StrConcat4(Translate("UPDATE SORT SET STATUS = 'DONE' WHERE "), in_group, Translate(""), Translate(""));
    if( 0 == Update_FIle.Open(sort_file + " " + "SORT", hslRead, update_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 != Update_FIle.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Update_FIle.RemoveFields();
    count_sql = StrConcat2(Translate("SELECT COUNT(*) AS N FROM SORT WHERE STATUS = 'NOT_DONE'"), Translate(""));
    Count_Available.AddField("N", count_value, hslInteger);
    if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 == Count_Available.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != Count_Available.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Count_Available.RemoveFields();
    ret_Number_Remaining = count_value;
    if (count_value == 0)
    {
      SeqRemoveAll(io_Sequence_to_Sort);
    }
    else
    {
      filter_sql = StrConcat2(Translate("SELECT * FROM SORT WHERE STATUS = 'NOT_DONE' ORDER BY LINE_NUMBER ASC"), Translate(""));
      SeqRemoveAll(temp_seq1);
      Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
      Sort_File.AddField("LAB1", lab1, hslString, 255);
      Sort_File.AddField("POS1", pos1, hslString, 255);
      Sort_File.AddField("LAB2", not_used, hslString, 255);
      Sort_File.AddField("POS2", not_used, hslString, 255);
      Sort_File.AddField("VAL1", not_used, hslString, 255);
      Sort_File.AddField("VAL2", not_used, hslString, 255);
      Sort_File.AddField("X1", x1, hslFloat);
      Sort_File.AddField("Y1", y1, hslFloat);
      Sort_File.AddField("X2", not_used, hslString, 255);
      Sort_File.AddField("Y2", not_used, hslString, 255);
      Sort_File.AddField("STATUS", status, hslString, 255);
      if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
      }
      {
        while (
           (Sort_File.Eof() == 0)
        )
        {
          if( 0 == Sort_File.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          SeqAdd(temp_seq1, lab1, pos1);
        }
      }
      if( 0 != Sort_File.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      Sort_File.RemoveFields();
      temp_seq1.SetCurrentPosition(1);
      SeqCopySequence(io_Sequence_to_Sort, temp_seq1);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    return (ret_Number_Remaining);
  }

  function CHAN_ACCESS_Sort1Sequence1Array( device & ML_STAR, sequence & io_Sequence_to_Sort, variable & io_Array_of_Variables[], variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, variable & o_Sorted_Array[], variable & o_Channel_Pattern ) variable {
    private variable channel_raster;
    private variable used_exclusion;
    private variable status;
    private variable pos1;
    private variable num_to_sort;
    private variable in_group;
    private variable restriction_raster;
    private variable num_used;
    private variable in_index;
    private variable y_min;
    private variable update_sql;
    private variable y_max;
    private variable val1;
    private variable ret_Number_Remaining;
    private variable num_in_array;
    private variable value_equal;
    private variable num_labhand_channels;
    private variable total_channels;
    private variable file_index;
    private variable null;
    private variable restriction1;
    private variable not_used;
    private variable lab1;
    private variable sort_file;
    private variable prev_x_coord;
    private variable num_1mL_channels;
    private variable filter_sql;
    private variable prev_y_coord;
    private variable count_sql;
    private variable order_by;
    private variable num_5mL_channels;
    private variable is_string;
    private variable y1;
    private variable val_type1;
    private variable channel_number;
    private variable count_value;
    private variable x1;
    private variable line_number;
    private variable is_integer;
    private variable is_float;
    private variable sequence_name;
    private sequence temp_seq1;
    private file Count_Available;
    private file Update_FIle;
    private file Sort_File;
    private variable arr_temp_array1[];
    private variable arr_Y_Min[];
    private variable arr_Y_Max[];
    private variable arr_line_numbers[];
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable bool_FileExists;
    { sequence __temp; o_Sorted_Sequence = __temp; }
    o_Sorted_Array.SetSize( 0);
    o_Channel_Pattern = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    num_1mL_channels = DevGetCfgValueWithKey(ML_STAR, 1);
    num_5mL_channels = DevGetCfgValueWithKey(ML_STAR, 43);
    num_labhand_channels = DevGetCfgValueWithKey(ML_STAR, 47);
    i_Channel_Type = StrConcat2(i_Channel_Type, Translate(""));
    i_Channel_Type = StrIVal(i_Channel_Type);
    if (i_Channel_Type < 0)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type > 2)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type == 0)
    {
      total_channels = num_1mL_channels;
    }
    if (i_Channel_Type == 1)
    {
      total_channels = num_5mL_channels;
    }
    if (i_Channel_Type == 2)
    {
      total_channels = num_labhand_channels;
    }
    o_Channel_Pattern = Translate("");
    if (total_channels == 0)
    {
      if (i_Channel_Type == 0)
      {
        TrcTrace(Translate("****************************  There are no 1 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 1 mL channels installed!!"));
      }
      if (i_Channel_Type == 1)
      {
        TrcTrace(Translate("****************************  There are no 5 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 5 mL channels installed!!"));
      }
      if (i_Channel_Type == 2)
      {
        TrcTrace(Translate("****************************  There are no Lab Handler channels installed!"), Translate(""));
        ErrRaise(101, Translate("No Lab Handler channels installed!!"));
      }
    }
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, io_Sequence_to_Sort);
    HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, total_channels, 0);
    i_Max_Channel = StrConcat2(i_Max_Channel, Translate(""));
    i_Max_Channel = StrIVal(i_Max_Channel);
    if (i_Max_Channel <= 0)
    {
      i_Max_Channel = total_channels;
    }
    if (i_Max_Channel > total_channels)
    {
      i_Max_Channel = total_channels;
    }
    ret_Number_Remaining = 0;
    SeqRemoveAll(o_Sorted_Sequence);
    o_Sorted_Array.SetSize(i_Max_Channel);
    if (i_Channel_Type == 0)
    {
      arr_Y_Max=G_ARR_FW_PIP_COM_YMax;
      arr_Y_Min=G_ARR_FW_PIP_COM_YMin;
      channel_raster = G_FW_PIP_COM_Raster;
    }
    if (i_Channel_Type == 1)
    {
      arr_Y_Max=G_ARR_FW_XL_COM_YMax;
      arr_Y_Min=G_ARR_FW_XL_COM_YMin;
      channel_raster = G_FW_XL_COM_Raster;
    }
    if (i_Channel_Type == 2)
    {
      HELPERLIBRARY::GetChannelLimits(ML_STAR, i_Channel_Type, arr_Y_Max, arr_Y_Min, channel_raster);
    }
    HELPERLIBRARY::GetTempSortingFilePath(sort_file);
    bool_FileExists = HSLExtensions::File::Exists(sort_file);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(sort_file);
    }
    num_to_sort = SeqGetTotal(io_Sequence_to_Sort);
    sequence_name = SeqGetName(io_Sequence_to_Sort);
    num_in_array=io_Array_of_Variables.GetSize();
    value_equal = 0;
    if(num_to_sort == num_in_array) value_equal = 1;
    if (num_to_sort == 0)
    {
      return (ret_Number_Remaining);
    }
    if (value_equal == 0)
    {
      TrcTrace(Translate("##############  SEQUENCE AND ARRAY DO NOT HAVE THE SAME NUMBER OF POSITIONS."), Translate(""));
      ErrRaise(101, Translate("Sequence and array does not have the same number of positions."));
    }
    if(0){
      TrcTrace(Translate("________________________________________________________"), Translate(""));
      TrcTrace(Translate(""), Translate(""));
      TrcTrace(Translate("           Sequence to Sort:  "), sequence_name);
      TrcTrace(Translate("           Number of Positions in Sequence:  "), num_to_sort);
      TrcTrace(Translate("           Sort by Labware:  "), i_Sort_by_Labware);
      TrcTrace(Translate("           Sort by XY:  "), i_Sort_by_XY);
      TrcTrace(Translate("           Sort for Channel Raster:  "), i_Sort_for_Channel_Raster);
      TrcTrace(Translate("           Channel Raster:  "), channel_raster);
      TrcTrace(Translate("           Maximum Channel:  "), i_Max_Channel);
      if(i_Channel_Type == 0) Trace("           Channel Type:  1 mL");
      else if(i_Channel_Type == 1) Trace("           Channel Type:  5 mL");
      else if(i_Channel_Type == 2) Trace("           Channel Type:  Labware Handler");
      TrcTrace(Translate("________________________________________________________"), Translate(""));
    }
    is_float = HSLExtensions::Array::IsFloatArray(io_Array_of_Variables);
    is_integer = HSLExtensions::Array::IsIntegerArray(io_Array_of_Variables);
    is_string = HSLExtensions::Array::IsStringArray(io_Array_of_Variables);
    val_type1 = 0;
    if(is_float == 1) val_type1 = 1;
    else if(is_integer == 1) val_type1 = 2;
    Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
    Sort_File.AddField("LAB1", lab1, hslString, 255);
    Sort_File.AddField("POS1", pos1, hslString, 255);
    Sort_File.AddField("LAB2", not_used, hslString, 255);
    Sort_File.AddField("POS2", not_used, hslString, 255);
    Sort_File.AddField("VAL1", val1, hslString, 255);
    Sort_File.AddField("VAL2", not_used, hslString, 255);
    Sort_File.AddField("X1", x1, hslFloat);
    Sort_File.AddField("Y1", y1, hslFloat);
    Sort_File.AddField("X2", not_used, hslString, 255);
    Sort_File.AddField("Y2", not_used, hslString, 255);
    Sort_File.AddField("STATUS", status, hslString, 255);
    if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    not_used = Translate("-----");
    status = Translate("NOT_DONE");
    {
      for(line_number = 0; line_number < num_to_sort;)
      {
        line_number = line_number + 1;
        io_Sequence_to_Sort.SetCurrentPosition(line_number);
        lab1 = SeqGetLabwareId(io_Sequence_to_Sort);
        pos1 = SeqGetPositionId(io_Sequence_to_Sort);
        DevGetLabwarePositionEx(ML_STAR, lab1, pos1, x1, y1, null, null);
        val1=io_Array_of_Variables.GetAt(line_number-1);
        if( 0 == Sort_File.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != Sort_File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Sort_File.RemoveFields();
    arr_line_numbers.SetSize(0);
    prev_x_coord = 0.0;
    prev_y_coord = 999.0;
    {
      for(channel_number = 0; channel_number < i_Max_Channel;)
      {
        channel_number = channel_number + 1;
        prev_y_coord = prev_y_coord - channel_raster;
        restriction_raster = StrConcat8(Translate("AND (X1"), Translate(" = "), prev_x_coord, Translate(" AND "), Translate("Y1"), Translate(" <= "), prev_y_coord, Translate(")"));
        y_max=arr_Y_Max.GetAt(channel_number-1);
        y_min=arr_Y_Min.GetAt(channel_number-1);
        restriction1 = StrConcat8(Translate("(Y1 "), Translate(">= "), y_min, Translate(" AND "), Translate("Y1 "), Translate("<= "), y_max, Translate(")"));
        num_used=arr_line_numbers.GetSize();
        if (num_used == 0)
        {
          used_exclusion = Translate("");
        }
        else
        {
          used_exclusion = StrConcat2(Translate("AND LINE_NUMBER NOT IN("), Translate(""));
          {
            for(in_index = 0; in_index < num_used;)
            {
              in_index = in_index + 1;
              line_number=arr_line_numbers.GetAt(in_index-1);
              if (in_index != 1)
              {
                used_exclusion = StrConcat2(used_exclusion, Translate(", "));
              }
              used_exclusion = StrConcat2(used_exclusion, line_number);
            }
          }
          used_exclusion = StrConcat2(used_exclusion, Translate(")"));
        }
        order_by = Translate("");
        if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY LAB1 ASC, X1 ASC, Y1 DESC";
        }
        else if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 0)
        {
             order_by = "ORDER BY LAB1 ASC, LINE_NUMBER ASC";
        }
        else if(i_Sort_by_Labware == 0 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY X1 ASC, Y1 DESC";
        }
        else
        {
             order_by = "ORDER BY LINE_NUMBER ASC";
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), restriction_raster);
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value == 0)
        {
          prev_x_coord = 0.0;
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value > 0)
        {
          filter_sql = StrConcat12(Translate("SELECT * FROM SORT WHERE "), restriction1, Translate(" "), used_exclusion, Translate(" "), order_by, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
          Sort_File.AddField("LAB1", lab1, hslString, 255);
          Sort_File.AddField("POS1", pos1, hslString, 255);
          Sort_File.AddField("LAB2", not_used, hslString, 255);
          Sort_File.AddField("POS2", not_used, hslString, 255);
          Sort_File.AddField("VAL1", val1, hslString, 255);
          Sort_File.AddField("VAL2", not_used, hslString, 255);
          Sort_File.AddField("X1", x1, hslFloat);
          Sort_File.AddField("Y1", y1, hslFloat);
          Sort_File.AddField("X2", not_used, hslString, 255);
          Sort_File.AddField("Y2", not_used, hslString, 255);
          Sort_File.AddField("STATUS", status, hslString, 255);
          if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
          }
          {
            file_index = 0;
            while (
               (Sort_File.Eof() == 0)
            )
            {
              file_index = file_index + 1;
              if( 0 == Sort_File.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (i_Sort_for_Channel_Raster == 0)
              {
                break;
              }
              if (x1 != prev_x_coord)
              {
                break;
              }
              if (y1 <= prev_y_coord)
              {
                break;
              }
            }
          }
          if( 0 != Sort_File.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          Sort_File.RemoveFields();
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          SeqAdd(o_Sorted_Sequence, lab1, pos1);
          HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, channel_number, 1);
          o_Sorted_Array.SetAt(channel_number-1, val1);
          arr_line_numbers.AddAsLast(line_number);
          prev_x_coord = x1;
          prev_y_coord = y1;
        }
        else
        {
          val1 = Translate("0");
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          o_Sorted_Array.SetAt(channel_number-1, val1);
        }
      }
    }
    o_Sorted_Sequence.SetCurrentPosition(1);
    num_used=arr_line_numbers.GetSize();
    ret_Number_Remaining = num_to_sort - num_used;
    if (num_used == 0)
    {
      TrcTrace(Translate("**********************************  The remaining positions are out of reach for the selected channels!!!!"), Translate(""));
      ErrRaise(101, Translate("The remaining positions are out of reach for all the selected channels!!!!"));
    }
    in_group = StrConcat2(Translate("LINE_NUMBER IN("), Translate(""));
    {
      for(in_index = 0; in_index < num_used;)
      {
        in_index = in_index + 1;
        line_number=arr_line_numbers.GetAt(in_index-1);
        if (in_index != 1)
        {
          in_group = StrConcat2(in_group, Translate(", "));
        }
        in_group = StrConcat2(in_group, line_number);
      }
    }
    in_group = StrConcat2(in_group, Translate(")"));
    update_sql = StrConcat4(Translate("UPDATE SORT SET STATUS = 'DONE' WHERE "), in_group, Translate(""), Translate(""));
    if( 0 == Update_FIle.Open(sort_file + " " + "SORT", hslRead, update_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 != Update_FIle.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Update_FIle.RemoveFields();
    count_sql = StrConcat2(Translate("SELECT COUNT(*) AS N FROM SORT WHERE STATUS = 'NOT_DONE'"), Translate(""));
    Count_Available.AddField("N", count_value, hslInteger);
    if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 == Count_Available.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != Count_Available.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Count_Available.RemoveFields();
    ret_Number_Remaining = count_value;
    if (count_value == 0)
    {
      SeqRemoveAll(io_Sequence_to_Sort);
      io_Array_of_Variables.SetSize(0);
    }
    else
    {
      filter_sql = StrConcat2(Translate("SELECT * FROM SORT WHERE STATUS = 'NOT_DONE' ORDER BY LINE_NUMBER ASC"), Translate(""));
      SeqRemoveAll(temp_seq1);
      arr_temp_array1.SetSize(0);
      Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
      Sort_File.AddField("LAB1", lab1, hslString, 255);
      Sort_File.AddField("POS1", pos1, hslString, 255);
      Sort_File.AddField("LAB2", not_used, hslString, 255);
      Sort_File.AddField("POS2", not_used, hslString, 255);
      Sort_File.AddField("VAL1", val1, hslString, 255);
      Sort_File.AddField("VAL2", not_used, hslString, 255);
      Sort_File.AddField("X1", x1, hslFloat);
      Sort_File.AddField("Y1", y1, hslFloat);
      Sort_File.AddField("X2", not_used, hslString, 255);
      Sort_File.AddField("Y2", not_used, hslString, 255);
      Sort_File.AddField("STATUS", status, hslString, 255);
      if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
      }
      {
        while (
           (Sort_File.Eof() == 0)
        )
        {
          if( 0 == Sort_File.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          arr_temp_array1.AddAsLast(val1);
          SeqAdd(temp_seq1, lab1, pos1);
        }
      }
      if( 0 != Sort_File.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      Sort_File.RemoveFields();
      temp_seq1.SetCurrentPosition(1);
      SeqCopySequence(io_Sequence_to_Sort, temp_seq1);
      io_Array_of_Variables=arr_temp_array1;
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    return (ret_Number_Remaining);
  }

  function CHAN_ACCESS_Sort1Sequence2Arrays( device & ML_STAR, sequence & io_Sequence_to_Sort, variable & io_Array_of_Variables[], variable & io_Array_of_Variables2[], variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, variable & o_Sorted_Array[], variable & o_Sorted_Array2[], variable & o_Channel_Pattern ) variable {
    private variable used_exclusion;
    private variable channel_raster;
    private variable status;
    private variable num_in_array2;
    private variable num_to_sort;
    private variable in_group;
    private variable pos1;
    private variable is_string2;
    private variable restriction_raster;
    private variable num_used;
    private variable in_index;
    private variable update_sql;
    private variable y_min;
    private variable ret_Number_Remaining;
    private variable is_float2;
    private variable val1;
    private variable y_max;
    private variable num_in_array;
    private variable value_equal;
    private variable num_labhand_channels;
    private variable total_channels;
    private variable val2;
    private variable file_index;
    private variable null;
    private variable restriction1;
    private variable not_used;
    private variable lab1;
    private variable sort_file;
    private variable is_integer2;
    private variable filter_sql;
    private variable prev_y_coord;
    private variable num_1mL_channels;
    private variable prev_x_coord;
    private variable count_sql;
    private variable order_by;
    private variable num_5mL_channels;
    private variable val_type1;
    private variable is_string;
    private variable y1;
    private variable channel_number;
    private variable count_value;
    private variable val_type2;
    private variable x1;
    private variable is_integer;
    private variable line_number;
    private variable is_float;
    private variable sequence_name;
    private sequence temp_seq1;
    private file Count_Available;
    private file Update_FIle;
    private file Sort_File;
    private variable arr_temp_array1[];
    private variable arr_temp_array2[];
    private variable arr_Y_Min[];
    private variable arr_Y_Max[];
    private variable arr_line_numbers[];
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable bool_FileExists;
    private variable int_Count;
    { sequence __temp; o_Sorted_Sequence = __temp; }
    o_Sorted_Array.SetSize( 0);
    o_Sorted_Array2.SetSize( 0);
    o_Channel_Pattern = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    num_1mL_channels = DevGetCfgValueWithKey(ML_STAR, 1);
    num_5mL_channels = DevGetCfgValueWithKey(ML_STAR, 43);
    num_labhand_channels = DevGetCfgValueWithKey(ML_STAR, 47);
    i_Channel_Type = StrConcat2(i_Channel_Type, Translate(""));
    i_Channel_Type = StrIVal(i_Channel_Type);
    if (i_Channel_Type < 0)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type > 2)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type == 0)
    {
      total_channels = num_1mL_channels;
    }
    if (i_Channel_Type == 1)
    {
      total_channels = num_5mL_channels;
    }
    if (i_Channel_Type == 2)
    {
      total_channels = num_labhand_channels;
    }
    o_Channel_Pattern = Translate("");
    if (total_channels == 0)
    {
      if (i_Channel_Type == 0)
      {
        TrcTrace(Translate("****************************  There are no 1 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 1 mL channels installed!!"));
      }
      if (i_Channel_Type == 1)
      {
        TrcTrace(Translate("****************************  There are no 5 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 5 mL channels installed!!"));
      }
      if (i_Channel_Type == 2)
      {
        TrcTrace(Translate("****************************  There are no Lab Handler channels installed!"), Translate(""));
        ErrRaise(101, Translate("No Lab Handler channels installed!!"));
      }
    }
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, io_Sequence_to_Sort);
    HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, total_channels, 0);
    i_Max_Channel = StrConcat2(i_Max_Channel, Translate(""));
    i_Max_Channel = StrIVal(i_Max_Channel);
    if (i_Max_Channel <= 0)
    {
      i_Max_Channel = total_channels;
    }
    if (i_Max_Channel > total_channels)
    {
      i_Max_Channel = total_channels;
    }
    ret_Number_Remaining = 0;
    SeqRemoveAll(o_Sorted_Sequence);
    o_Sorted_Array.SetSize(i_Max_Channel);
    o_Sorted_Array2.SetSize(i_Max_Channel);
    if (i_Channel_Type == 0)
    {
      arr_Y_Max=G_ARR_FW_PIP_COM_YMax;
      arr_Y_Min=G_ARR_FW_PIP_COM_YMin;
      channel_raster = G_FW_PIP_COM_Raster;
    }
    if (i_Channel_Type == 1)
    {
      arr_Y_Max=G_ARR_FW_XL_COM_YMax;
      arr_Y_Min=G_ARR_FW_XL_COM_YMin;
      channel_raster = G_FW_XL_COM_Raster;
    }
    if (i_Channel_Type == 2)
    {
      HELPERLIBRARY::GetChannelLimits(ML_STAR, i_Channel_Type, arr_Y_Max, arr_Y_Min, channel_raster);
    }
    HELPERLIBRARY::GetTempSortingFilePath(sort_file);
    bool_FileExists = HSLExtensions::File::Exists(sort_file);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(sort_file);
    }
    num_to_sort = SeqGetTotal(io_Sequence_to_Sort);
    sequence_name = SeqGetName(io_Sequence_to_Sort);
    num_in_array=io_Array_of_Variables.GetSize();
    num_in_array2=io_Array_of_Variables2.GetSize();
    value_equal = 0;
    if(num_to_sort == num_in_array && num_to_sort == num_in_array2) value_equal = 1;
    if (num_to_sort == 0)
    {
      return (ret_Number_Remaining);
    }
    if (value_equal == 0)
    {
      TrcTrace(Translate("##############  SEQUENCE AND ARRAYS DO NOT HAVE THE SAME NUMBER OF POSITIONS."), Translate(""));
      ErrRaise(101, Translate("Sequence and arrays do not have the same number of positions."));
    }
    if(0){
      TrcTrace(Translate("________________________________________________________"), Translate(""));
      TrcTrace(Translate(""), Translate(""));
      TrcTrace(Translate("           Sequence to Sort:  "), sequence_name);
      TrcTrace(Translate("           Number of Positions in Sequence:  "), num_to_sort);
      TrcTrace(Translate("           Sort by Labware:  "), i_Sort_by_Labware);
      TrcTrace(Translate("           Sort by XY:  "), i_Sort_by_XY);
      TrcTrace(Translate("           Sort for Channel Raster:  "), i_Sort_for_Channel_Raster);
      TrcTrace(Translate("           Channel Raster:  "), channel_raster);
      TrcTrace(Translate("           Maximum Channel:  "), i_Max_Channel);
      if(i_Channel_Type == 0) Trace("           Channel Type:  1 mL");
      else if(i_Channel_Type == 1) Trace("           Channel Type:  5 mL");
      else if(i_Channel_Type == 2) Trace("           Channel Type:  Labware Handler");
      TrcTrace(Translate("________________________________________________________"), Translate(""));
    }
    is_float = HSLExtensions::Array::IsFloatArray(io_Array_of_Variables);
    is_integer = HSLExtensions::Array::IsIntegerArray(io_Array_of_Variables);
    is_string = HSLExtensions::Array::IsStringArray(io_Array_of_Variables);
    is_float2 = HSLExtensions::Array::IsFloatArray(io_Array_of_Variables2);
    is_integer2 = HSLExtensions::Array::IsIntegerArray(io_Array_of_Variables2);
    is_string2 = HSLExtensions::Array::IsStringArray(io_Array_of_Variables2);
    val_type1 = 0;
    val_type2 = 0;
    if(is_float == 1) val_type1 = 1;
    else if(is_integer == 1) val_type1 = 2;
    if(is_float2 == 1) val_type2 = 1;
    else if(is_integer2 == 1) val_type2 = 2;
    Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
    Sort_File.AddField("LAB1", lab1, hslString, 255);
    Sort_File.AddField("POS1", pos1, hslString, 255);
    Sort_File.AddField("LAB2", not_used, hslString, 255);
    Sort_File.AddField("POS2", not_used, hslString, 255);
    Sort_File.AddField("VAL1", val1, hslString, 255);
    Sort_File.AddField("VAL2", val2, hslString, 255);
    Sort_File.AddField("X1", x1, hslFloat);
    Sort_File.AddField("Y1", y1, hslFloat);
    Sort_File.AddField("X2", not_used, hslString, 255);
    Sort_File.AddField("Y2", not_used, hslString, 255);
    Sort_File.AddField("STATUS", status, hslString, 255);
    if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    not_used = Translate("-----");
    status = Translate("NOT_DONE");
    {
      for(line_number = 0; line_number < num_to_sort;)
      {
        line_number = line_number + 1;
        io_Sequence_to_Sort.SetCurrentPosition(line_number);
        lab1 = SeqGetLabwareId(io_Sequence_to_Sort);
        pos1 = SeqGetPositionId(io_Sequence_to_Sort);
        DevGetLabwarePositionEx(ML_STAR, lab1, pos1, x1, y1, null, null);
        val1=io_Array_of_Variables.GetAt(line_number-1);
        val2=io_Array_of_Variables2.GetAt(line_number-1);
        if( 0 == Sort_File.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != Sort_File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Sort_File.RemoveFields();
    arr_line_numbers.SetSize(0);
    prev_x_coord = 0.0;
    prev_y_coord = 999.0;
    {
      for(channel_number = 0; channel_number < i_Max_Channel;)
      {
        channel_number = channel_number + 1;
        prev_y_coord = prev_y_coord - channel_raster;
        restriction_raster = StrConcat8(Translate("AND (X1"), Translate(" = "), prev_x_coord, Translate(" AND "), Translate("Y1"), Translate(" <= "), prev_y_coord, Translate(")"));
        y_max=arr_Y_Max.GetAt(channel_number-1);
        y_min=arr_Y_Min.GetAt(channel_number-1);
        restriction1 = StrConcat8(Translate("(Y1 "), Translate(">= "), y_min, Translate(" AND "), Translate("Y1 "), Translate("<= "), y_max, Translate(")"));
        num_used=arr_line_numbers.GetSize();
        if (num_used == 0)
        {
          used_exclusion = Translate("");
        }
        else
        {
          used_exclusion = StrConcat2(Translate("AND LINE_NUMBER NOT IN("), Translate(""));
          {
            for(in_index = 0; in_index < num_used;)
            {
              in_index = in_index + 1;
              line_number=arr_line_numbers.GetAt(in_index-1);
              if (in_index != 1)
              {
                used_exclusion = StrConcat2(used_exclusion, Translate(", "));
              }
              used_exclusion = StrConcat2(used_exclusion, line_number);
            }
          }
          used_exclusion = StrConcat2(used_exclusion, Translate(")"));
        }
        order_by = Translate("");
        if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY LAB1 ASC, X1 ASC, Y1 DESC";
        }
        else if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 0)
        {
             order_by = "ORDER BY LAB1 ASC, LINE_NUMBER ASC";
        }
        else if(i_Sort_by_Labware == 0 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY X1 ASC, Y1 DESC";
        }
        else
        {
             order_by = "ORDER BY LINE_NUMBER ASC";
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), restriction_raster);
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value == 0)
        {
          prev_x_coord = 0.0;
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value > 0)
        {
          filter_sql = StrConcat12(Translate("SELECT * FROM SORT WHERE "), restriction1, Translate(" "), used_exclusion, Translate(" "), order_by, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
          Sort_File.AddField("LAB1", lab1, hslString, 255);
          Sort_File.AddField("POS1", pos1, hslString, 255);
          Sort_File.AddField("LAB2", not_used, hslString, 255);
          Sort_File.AddField("POS2", not_used, hslString, 255);
          Sort_File.AddField("VAL1", val1, hslString, 255);
          Sort_File.AddField("VAL2", val2, hslString, 255);
          Sort_File.AddField("X1", x1, hslFloat);
          Sort_File.AddField("Y1", y1, hslFloat);
          Sort_File.AddField("X2", not_used, hslString, 255);
          Sort_File.AddField("Y2", not_used, hslString, 255);
          Sort_File.AddField("STATUS", status, hslString, 255);
          if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
          }
          {
            file_index = 0;
            while (
               (Sort_File.Eof() == 0)
            )
            {
              file_index = file_index + 1;
              if( 0 == Sort_File.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (i_Sort_for_Channel_Raster == 0)
              {
                break;
              }
              if (x1 != prev_x_coord)
              {
                break;
              }
              if (y1 <= prev_y_coord)
              {
                break;
              }
            }
          }
          if( 0 != Sort_File.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          Sort_File.RemoveFields();
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          if(val_type2 == 1) val2 = FVal(val2);
          else if(val_type2 == 2) val2 = IVal(val2);
          SeqAdd(o_Sorted_Sequence, lab1, pos1);
          HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, channel_number, 1);
          o_Sorted_Array.SetAt(channel_number-1, val1);
          o_Sorted_Array2.SetAt(channel_number-1, val2);
          arr_line_numbers.AddAsLast(line_number);
          prev_x_coord = x1;
          prev_y_coord = y1;
        }
        else
        {
          val1 = Translate("0");
          val2 = Translate("0");
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          if(val_type2 == 1) val2 = FVal(val2);
          else if(val_type2 == 2) val2 = IVal(val2);
          o_Sorted_Array.SetAt(channel_number-1, val1);
          o_Sorted_Array2.SetAt(channel_number-1, val2);
        }
      }
    }
    o_Sorted_Sequence.SetCurrentPosition(1);
    num_used=arr_line_numbers.GetSize();
    ret_Number_Remaining = num_to_sort - num_used;
    if (num_used == 0)
    {
      TrcTrace(Translate("**********************************  The remaining positions are out of reach for the selected channels!!!!"), Translate(""));
      ErrRaise(101, Translate("The remaining positions are out of reach for all the selected channels!!!!"));
    }
    in_group = StrConcat2(Translate("LINE_NUMBER IN("), Translate(""));
    {
      for(in_index = 0; in_index < num_used;)
      {
        in_index = in_index + 1;
        line_number=arr_line_numbers.GetAt(in_index-1);
        if (in_index != 1)
        {
          in_group = StrConcat2(in_group, Translate(", "));
        }
        in_group = StrConcat2(in_group, line_number);
      }
    }
    in_group = StrConcat2(in_group, Translate(")"));
    update_sql = StrConcat4(Translate("UPDATE SORT SET STATUS = 'DONE' WHERE "), in_group, Translate(""), Translate(""));
    if( 0 == Update_FIle.Open(sort_file + " " + "SORT", hslRead, update_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 != Update_FIle.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Update_FIle.RemoveFields();
    count_sql = StrConcat2(Translate("SELECT COUNT(*) AS N FROM SORT WHERE STATUS = 'NOT_DONE'"), Translate(""));
    Count_Available.AddField("N", count_value, hslInteger);
    if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 == Count_Available.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != Count_Available.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Count_Available.RemoveFields();
    ret_Number_Remaining = count_value;
    if (count_value == 0)
    {
      SeqRemoveAll(io_Sequence_to_Sort);
      io_Array_of_Variables.SetSize(0);
      io_Array_of_Variables2.SetSize(0);
    }
    else
    {
      filter_sql = StrConcat2(Translate("SELECT * FROM SORT WHERE STATUS = 'NOT_DONE' ORDER BY LINE_NUMBER ASC"), Translate(""));
      SeqRemoveAll(temp_seq1);
      arr_temp_array1.SetSize(0);
      arr_temp_array2.SetSize(0);
      Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
      Sort_File.AddField("LAB1", lab1, hslString, 255);
      Sort_File.AddField("POS1", pos1, hslString, 255);
      Sort_File.AddField("LAB2", not_used, hslString, 255);
      Sort_File.AddField("POS2", not_used, hslString, 255);
      Sort_File.AddField("VAL1", val1, hslString, 255);
      Sort_File.AddField("VAL2", val2, hslString, 255);
      Sort_File.AddField("X1", x1, hslFloat);
      Sort_File.AddField("Y1", y1, hslFloat);
      Sort_File.AddField("X2", not_used, hslString, 255);
      Sort_File.AddField("Y2", not_used, hslString, 255);
      Sort_File.AddField("STATUS", status, hslString, 255);
      if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
      }
      {
        while (
           (Sort_File.Eof() == 0)
        )
        {
          if( 0 == Sort_File.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          if(val_type2 == 1) val2 = FVal(val2);
          else if(val_type2 == 2) val2 = IVal(val2);
          arr_temp_array1.AddAsLast(val1);
          arr_temp_array2.AddAsLast(val2);
          SeqAdd(temp_seq1, lab1, pos1);
        }
      }
      if( 0 != Sort_File.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      Sort_File.RemoveFields();
      temp_seq1.SetCurrentPosition(1);
      SeqCopySequence(io_Sequence_to_Sort, temp_seq1);
      io_Array_of_Variables=arr_temp_array1;
      io_Array_of_Variables2=arr_temp_array2;
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    return (ret_Number_Remaining);
  }

  function CHAN_ACCESS_Sort2Sequences( device & ML_STAR, sequence & io_Sequence_to_Sort, sequence & io_Sequence_to_Sort2, variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, sequence & o_Sorted_Sequence2, variable & o_Channel_Pattern ) variable {
    private variable channel_raster;
    private variable status;
    private variable used_exclusion;
    private variable num_to_sort;
    private variable in_group;
    private variable pos1;
    private variable pos2;
    private variable num_used;
    private variable restriction_raster;
    private variable in_index;
    private variable y_min;
    private variable num_to_sort2;
    private variable update_sql;
    private variable y_max;
    private variable ret_Number_Remaining;
    private variable value_equal;
    private variable num_labhand_channels;
    private variable total_channels;
    private variable sequence_name2;
    private variable file_index;
    private variable restriction1;
    private variable null;
    private variable not_used;
    private variable restriction2;
    private variable lab1;
    private variable sort_file;
    private variable lab2;
    private variable prev_x_coord;
    private variable num_1mL_channels;
    private variable filter_sql;
    private variable prev_y_coord;
    private variable count_sql;
    private variable order_by;
    private variable num_5mL_channels;
    private variable channel_number;
    private variable y1;
    private variable count_value;
    private variable y2;
    private variable x1;
    private variable x2;
    private variable line_number;
    private variable sequence_name;
    private sequence temp_seq1;
    private sequence temp_seq2;
    private file Count_Available;
    private file Update_FIle;
    private file Sort_File;
    private variable arr_Y_Min[];
    private variable arr_Y_Max[];
    private variable arr_line_numbers[];
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable bool_FileExists;
    private variable int_Count;
    { sequence __temp; o_Sorted_Sequence = __temp; }
    { sequence __temp; o_Sorted_Sequence2 = __temp; }
    o_Channel_Pattern = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    num_1mL_channels = DevGetCfgValueWithKey(ML_STAR, 1);
    num_5mL_channels = DevGetCfgValueWithKey(ML_STAR, 43);
    num_labhand_channels = DevGetCfgValueWithKey(ML_STAR, 47);
    i_Channel_Type = StrConcat2(i_Channel_Type, Translate(""));
    i_Channel_Type = StrIVal(i_Channel_Type);
    if (i_Channel_Type < 0)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type > 2)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type == 0)
    {
      total_channels = num_1mL_channels;
    }
    if (i_Channel_Type == 1)
    {
      total_channels = num_5mL_channels;
    }
    if (i_Channel_Type == 2)
    {
      total_channels = num_labhand_channels;
    }
    o_Channel_Pattern = Translate("");
    if (total_channels == 0)
    {
      if (i_Channel_Type == 0)
      {
        TrcTrace(Translate("****************************  There are no 1 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 1 mL channels installed!!"));
      }
      if (i_Channel_Type == 1)
      {
        TrcTrace(Translate("****************************  There are no 5 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 5 mL channels installed!!"));
      }
      if (i_Channel_Type == 2)
      {
        TrcTrace(Translate("****************************  There are no Lab Handler channels installed!"), Translate(""));
        ErrRaise(101, Translate("No Lab Handler channels installed!!"));
      }
    }
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, io_Sequence_to_Sort);
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, io_Sequence_to_Sort2);
    HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, total_channels, 0);
    i_Max_Channel = StrConcat2(i_Max_Channel, Translate(""));
    i_Max_Channel = StrIVal(i_Max_Channel);
    if (i_Max_Channel <= 0)
    {
      i_Max_Channel = total_channels;
    }
    if (i_Max_Channel > total_channels)
    {
      i_Max_Channel = total_channels;
    }
    ret_Number_Remaining = 0;
    SeqRemoveAll(o_Sorted_Sequence);
    SeqRemoveAll(o_Sorted_Sequence);
    if (i_Channel_Type == 0)
    {
      arr_Y_Max=G_ARR_FW_PIP_COM_YMax;
      arr_Y_Min=G_ARR_FW_PIP_COM_YMin;
      channel_raster = G_FW_PIP_COM_Raster;
    }
    if (i_Channel_Type == 1)
    {
      arr_Y_Max=G_ARR_FW_XL_COM_YMax;
      arr_Y_Min=G_ARR_FW_XL_COM_YMin;
      channel_raster = G_FW_XL_COM_Raster;
    }
    if (i_Channel_Type == 2)
    {
      HELPERLIBRARY::GetChannelLimits(ML_STAR, i_Channel_Type, arr_Y_Max, arr_Y_Min, channel_raster);
    }
    HELPERLIBRARY::GetTempSortingFilePath(sort_file);
    bool_FileExists = HSLExtensions::File::Exists(sort_file);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(sort_file);
    }
    num_to_sort = SeqGetTotal(io_Sequence_to_Sort);
    num_to_sort2 = SeqGetTotal(io_Sequence_to_Sort2);
    sequence_name = SeqGetName(io_Sequence_to_Sort);
    sequence_name2 = SeqGetName(io_Sequence_to_Sort2);
    value_equal = 0;
    if(num_to_sort == num_to_sort2) value_equal = 1;
    if (num_to_sort == 0)
    {
      return (ret_Number_Remaining);
    }
    if (value_equal == 0)
    {
      TrcTrace(Translate("##############  SEQUENCES DO NOT HAVE THE SAME NUMBER OF POSITIONS."), Translate(""));
      ErrRaise(101, Translate("Sequences do not have the same number of positions."));
      return (ret_Number_Remaining);
    }
    if(0){
      TrcTrace(Translate("________________________________________________________"), Translate(""));
      TrcTrace(Translate(""), Translate(""));
      TrcTrace4(Translate("           Sequence to Sort:  "), sequence_name, Translate("     Second Sequence to Sort:  "), sequence_name2);
      TrcTrace(Translate("           Number of Positions in Sequence:  "), num_to_sort);
      TrcTrace(Translate("           Sort by Labware:  "), i_Sort_by_Labware);
      TrcTrace(Translate("           Sort by XY:  "), i_Sort_by_XY);
      TrcTrace(Translate("           Sort for Channel Raster:  "), i_Sort_for_Channel_Raster);
      TrcTrace(Translate("           Channel Raster:  "), channel_raster);
      TrcTrace(Translate("           Maximum Channel:  "), i_Max_Channel);
      if(i_Channel_Type == 0) Trace("           Channel Type:  1 mL");
      else if(i_Channel_Type == 1) Trace("           Channel Type:  5 mL");
      else if(i_Channel_Type == 2) Trace("           Channel Type:  Labware Handler");
      TrcTrace(Translate("________________________________________________________"), Translate(""));
    }
    Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
    Sort_File.AddField("LAB1", lab1, hslString, 255);
    Sort_File.AddField("POS1", pos1, hslString, 255);
    Sort_File.AddField("LAB2", lab2, hslString, 255);
    Sort_File.AddField("POS2", pos2, hslString, 255);
    Sort_File.AddField("VAL1", not_used, hslString, 255);
    Sort_File.AddField("VAL2", not_used, hslString, 255);
    Sort_File.AddField("X1", x1, hslFloat);
    Sort_File.AddField("Y1", y1, hslFloat);
    Sort_File.AddField("X2", x2, hslFloat);
    Sort_File.AddField("Y2", y2, hslFloat);
    Sort_File.AddField("STATUS", status, hslString, 255);
    if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    not_used = Translate("-----");
    status = Translate("NOT_DONE");
    {
      for(line_number = 0; line_number < num_to_sort;)
      {
        line_number = line_number + 1;
        io_Sequence_to_Sort.SetCurrentPosition(line_number);
        io_Sequence_to_Sort2.SetCurrentPosition(line_number);
        lab1 = SeqGetLabwareId(io_Sequence_to_Sort);
        pos1 = SeqGetPositionId(io_Sequence_to_Sort);
        lab2 = SeqGetLabwareId(io_Sequence_to_Sort2);
        pos2 = SeqGetPositionId(io_Sequence_to_Sort2);
        DevGetLabwarePositionEx(ML_STAR, lab1, pos1, x1, y1, null, null);
        DevGetLabwarePositionEx(ML_STAR, lab2, pos2, x2, y2, null, null);
        if( 0 == Sort_File.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != Sort_File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Sort_File.RemoveFields();
    arr_line_numbers.SetSize(0);
    prev_x_coord = 0.0;
    prev_y_coord = 999.0;
    {
      for(channel_number = 0; channel_number < i_Max_Channel;)
      {
        channel_number = channel_number + 1;
        prev_y_coord = prev_y_coord - channel_raster;
        restriction_raster = StrConcat8(Translate("AND (X1"), Translate(" = "), prev_x_coord, Translate(" AND "), Translate("Y1"), Translate(" <= "), prev_y_coord, Translate(")"));
        y_max=arr_Y_Max.GetAt(channel_number-1);
        y_min=arr_Y_Min.GetAt(channel_number-1);
        restriction1 = StrConcat8(Translate("(Y1 "), Translate(">= "), y_min, Translate(" AND "), Translate("Y1 "), Translate("<= "), y_max, Translate(")"));
        restriction2 = StrConcat8(Translate("(Y2 "), Translate(">= "), y_min, Translate(" AND "), Translate("Y2 "), Translate("<= "), y_max, Translate(")"));
        num_used=arr_line_numbers.GetSize();
        if (num_used == 0)
        {
          used_exclusion = Translate("");
        }
        else
        {
          used_exclusion = StrConcat2(Translate("AND LINE_NUMBER NOT IN("), Translate(""));
          {
            for(in_index = 0; in_index < num_used;)
            {
              in_index = in_index + 1;
              line_number=arr_line_numbers.GetAt(in_index-1);
              if (in_index != 1)
              {
                used_exclusion = StrConcat2(used_exclusion, Translate(", "));
              }
              used_exclusion = StrConcat2(used_exclusion, line_number);
            }
          }
          used_exclusion = StrConcat2(used_exclusion, Translate(")"));
        }
        order_by = Translate("");
        if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY LAB1 ASC, X1 ASC, Y1 DESC";
        }
        else if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 0)
        {
             order_by = "ORDER BY LAB1 ASC, LINE_NUMBER ASC";
        }
        else if(i_Sort_by_Labware == 0 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY X1 ASC, Y1 DESC";
        }
        else
        {
             order_by = "ORDER BY LINE_NUMBER ASC";
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" AND "), restriction2, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), restriction_raster);
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value == 0)
        {
          prev_x_coord = 0.0;
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" AND "), restriction2, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value > 0)
        {
          filter_sql = StrConcat12(Translate("SELECT * FROM SORT WHERE "), restriction1, Translate(" AND "), restriction2, Translate(""), Translate(""), Translate(""), Translate(""), Translate(" "), used_exclusion, Translate(" "), order_by);
          Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
          Sort_File.AddField("LAB1", lab1, hslString, 255);
          Sort_File.AddField("POS1", pos1, hslString, 255);
          Sort_File.AddField("LAB2", lab2, hslString, 255);
          Sort_File.AddField("POS2", pos2, hslString, 255);
          Sort_File.AddField("VAL1", not_used, hslString, 255);
          Sort_File.AddField("VAL2", not_used, hslString, 255);
          Sort_File.AddField("X1", x1, hslFloat);
          Sort_File.AddField("Y1", y1, hslFloat);
          Sort_File.AddField("X2", x2, hslFloat);
          Sort_File.AddField("Y2", y2, hslFloat);
          Sort_File.AddField("STATUS", status, hslString, 255);
          if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
          }
          {
            file_index = 0;
            while (
               (Sort_File.Eof() == 0)
            )
            {
              file_index = file_index + 1;
              if( 0 == Sort_File.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (i_Sort_for_Channel_Raster == 0)
              {
                break;
              }
              if (x1 != prev_x_coord)
              {
                break;
              }
              if (y1 <= prev_y_coord)
              {
                break;
              }
            }
          }
          if( 0 != Sort_File.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          Sort_File.RemoveFields();
          SeqAdd(o_Sorted_Sequence, lab1, pos1);
          SeqAdd(o_Sorted_Sequence2, lab2, pos2);
          HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, channel_number, 1);
          arr_line_numbers.AddAsLast(line_number);
          prev_x_coord = x1;
          prev_y_coord = y1;
        }
      }
    }
    o_Sorted_Sequence.SetCurrentPosition(1);
    o_Sorted_Sequence2.SetCurrentPosition(1);
    num_used=arr_line_numbers.GetSize();
    ret_Number_Remaining = num_to_sort - num_used;
    if (num_used == 0)
    {
      TrcTrace(Translate("**********************************  The remaining positions are out of reach for the selected channels!!!!"), Translate(""));
      ErrRaise(101, Translate("The remaining positions are out of reach for all the selected channels!!!!"));
    }
    in_group = StrConcat2(Translate("LINE_NUMBER IN("), Translate(""));
    {
      for(in_index = 0; in_index < num_used;)
      {
        in_index = in_index + 1;
        line_number=arr_line_numbers.GetAt(in_index-1);
        if (in_index != 1)
        {
          in_group = StrConcat2(in_group, Translate(", "));
        }
        in_group = StrConcat2(in_group, line_number);
      }
    }
    in_group = StrConcat2(in_group, Translate(")"));
    update_sql = StrConcat4(Translate("UPDATE SORT SET STATUS = 'DONE' WHERE "), in_group, Translate(""), Translate(""));
    if( 0 == Update_FIle.Open(sort_file + " " + "SORT", hslRead, update_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 != Update_FIle.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Update_FIle.RemoveFields();
    count_sql = StrConcat2(Translate("SELECT COUNT(*) AS N FROM SORT WHERE STATUS = 'NOT_DONE'"), Translate(""));
    Count_Available.AddField("N", count_value, hslInteger);
    if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 == Count_Available.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != Count_Available.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Count_Available.RemoveFields();
    ret_Number_Remaining = count_value;
    if (count_value == 0)
    {
      SeqRemoveAll(io_Sequence_to_Sort);
      SeqRemoveAll(io_Sequence_to_Sort2);
    }
    else
    {
      filter_sql = StrConcat2(Translate("SELECT * FROM SORT WHERE STATUS = 'NOT_DONE' ORDER BY LINE_NUMBER ASC"), Translate(""));
      SeqRemoveAll(temp_seq1);
      SeqRemoveAll(temp_seq2);
      Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
      Sort_File.AddField("LAB1", lab1, hslString, 255);
      Sort_File.AddField("POS1", pos1, hslString, 255);
      Sort_File.AddField("LAB2", lab2, hslString, 255);
      Sort_File.AddField("POS2", pos2, hslString, 255);
      Sort_File.AddField("VAL1", not_used, hslString, 255);
      Sort_File.AddField("VAL2", not_used, hslString, 255);
      Sort_File.AddField("X1", x1, hslFloat);
      Sort_File.AddField("Y1", y1, hslFloat);
      Sort_File.AddField("X2", x2, hslFloat);
      Sort_File.AddField("Y2", y2, hslFloat);
      Sort_File.AddField("STATUS", status, hslString, 255);
      if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
      }
      {
        while (
           (Sort_File.Eof() == 0)
        )
        {
          if( 0 == Sort_File.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          SeqAdd(temp_seq1, lab1, pos1);
          SeqAdd(temp_seq2, lab2, pos2);
        }
      }
      if( 0 != Sort_File.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      Sort_File.RemoveFields();
      temp_seq1.SetCurrentPosition(1);
      temp_seq2.SetCurrentPosition(1);
      SeqCopySequence(io_Sequence_to_Sort, temp_seq1);
      SeqCopySequence(io_Sequence_to_Sort2, temp_seq2);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    return (ret_Number_Remaining);
  }

  function CHAN_ACCESS_Sort2Sequences1Array( device & ML_STAR, sequence & io_Sequence_to_Sort, sequence & io_Sequence_to_Sort2, variable & io_Array_of_Variables[], variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, sequence & o_Sorted_Sequence2, variable & o_Sorted_Array[], variable & o_Channel_Pattern ) variable {
    private variable channel_raster;
    private variable status;
    private variable used_exclusion;
    private variable pos1;
    private variable in_group;
    private variable num_to_sort;
    private variable restriction_raster;
    private variable num_used;
    private variable pos2;
    private variable in_index;
    private variable y_min;
    private variable num_to_sort2;
    private variable update_sql;
    private variable y_max;
    private variable val1;
    private variable ret_Number_Remaining;
    private variable num_in_array;
    private variable value_equal;
    private variable num_labhand_channels;
    private variable sequence_name2;
    private variable total_channels;
    private variable file_index;
    private variable restriction1;
    private variable null;
    private variable restriction2;
    private variable not_used;
    private variable lab1;
    private variable sort_file;
    private variable lab2;
    private variable filter_sql;
    private variable count_sql;
    private variable num_1mL_channels;
    private variable prev_y_coord;
    private variable prev_x_coord;
    private variable order_by;
    private variable num_5mL_channels;
    private variable is_string;
    private variable count_value;
    private variable val_type1;
    private variable y1;
    private variable channel_number;
    private variable y2;
    private variable x1;
    private variable is_integer;
    private variable x2;
    private variable line_number;
    private variable sequence_name;
    private variable is_float;
    private sequence temp_seq1;
    private sequence temp_seq2;
    private file Count_Available;
    private file Update_FIle;
    private file Sort_File;
    private variable arr_temp_array1[];
    private variable arr_Y_Min[];
    private variable arr_Y_Max[];
    private variable arr_line_numbers[];
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable bool_FileExists;
    private variable int_Count;
    { sequence __temp; o_Sorted_Sequence = __temp; }
    { sequence __temp; o_Sorted_Sequence2 = __temp; }
    o_Sorted_Array.SetSize( 0);
    o_Channel_Pattern = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    num_1mL_channels = DevGetCfgValueWithKey(ML_STAR, 1);
    num_5mL_channels = DevGetCfgValueWithKey(ML_STAR, 43);
    num_labhand_channels = DevGetCfgValueWithKey(ML_STAR, 47);
    i_Channel_Type = StrConcat2(i_Channel_Type, Translate(""));
    i_Channel_Type = StrIVal(i_Channel_Type);
    if (i_Channel_Type < 0)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type > 2)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type == 0)
    {
      total_channels = num_1mL_channels;
    }
    if (i_Channel_Type == 1)
    {
      total_channels = num_5mL_channels;
    }
    if (i_Channel_Type == 2)
    {
      total_channels = num_labhand_channels;
    }
    o_Channel_Pattern = Translate("");
    if (total_channels == 0)
    {
      if (i_Channel_Type == 0)
      {
        TrcTrace(Translate("****************************  There are no 1 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 1 mL channels installed!!"));
      }
      if (i_Channel_Type == 1)
      {
        TrcTrace(Translate("****************************  There are no 5 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 5 mL channels installed!!"));
      }
      if (i_Channel_Type == 2)
      {
        TrcTrace(Translate("****************************  There are no Lab Handler channels installed!"), Translate(""));
        ErrRaise(101, Translate("No Lab Handler channels installed!!"));
      }
    }
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, io_Sequence_to_Sort);
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, io_Sequence_to_Sort2);
    HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, total_channels, 0);
    i_Max_Channel = StrConcat2(i_Max_Channel, Translate(""));
    i_Max_Channel = StrIVal(i_Max_Channel);
    if (i_Max_Channel <= 0)
    {
      i_Max_Channel = total_channels;
    }
    if (i_Max_Channel > total_channels)
    {
      i_Max_Channel = total_channels;
    }
    ret_Number_Remaining = 0;
    SeqRemoveAll(o_Sorted_Sequence);
    SeqRemoveAll(o_Sorted_Sequence2);
    o_Sorted_Array.SetSize(i_Max_Channel);
    if (i_Channel_Type == 0)
    {
      arr_Y_Max=G_ARR_FW_PIP_COM_YMax;
      arr_Y_Min=G_ARR_FW_PIP_COM_YMin;
      channel_raster = G_FW_PIP_COM_Raster;
    }
    if (i_Channel_Type == 1)
    {
      arr_Y_Max=G_ARR_FW_XL_COM_YMax;
      arr_Y_Min=G_ARR_FW_XL_COM_YMin;
      channel_raster = G_FW_XL_COM_Raster;
    }
    if (i_Channel_Type == 2)
    {
      HELPERLIBRARY::GetChannelLimits(ML_STAR, i_Channel_Type, arr_Y_Max, arr_Y_Min, channel_raster);
    }
    HELPERLIBRARY::GetTempSortingFilePath(sort_file);
    bool_FileExists = HSLExtensions::File::Exists(sort_file);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(sort_file);
    }
    num_to_sort = SeqGetTotal(io_Sequence_to_Sort);
    num_to_sort2 = SeqGetTotal(io_Sequence_to_Sort2);
    sequence_name = SeqGetName(io_Sequence_to_Sort);
    sequence_name2 = SeqGetName(io_Sequence_to_Sort2);
    num_in_array=io_Array_of_Variables.GetSize();
    value_equal = 0;
    if(num_to_sort == num_in_array && num_to_sort == num_to_sort2) value_equal = 1;
    if (num_to_sort == 0)
    {
      return (ret_Number_Remaining);
    }
    if (value_equal == 0)
    {
      TrcTrace(Translate("##############  SEQUENCES AND ARRAY DO NOT HAVE THE SAME NUMBER OF POSITIONS."), Translate(""));
      ErrRaise(101, Translate("Sequences and array do not have the same number of positions."));
    }
    if(0){
      TrcTrace(Translate("________________________________________________________"), Translate(""));
      TrcTrace(Translate(""), Translate(""));
      TrcTrace4(Translate("           Sequence to Sort:  "), sequence_name, Translate("     Second Sequence to Sort:  "), sequence_name2);
      TrcTrace(Translate("           Number of Positions in Sequence:  "), num_to_sort);
      TrcTrace(Translate("           Sort by Labware:  "), i_Sort_by_Labware);
      TrcTrace(Translate("           Sort by XY:  "), i_Sort_by_XY);
      TrcTrace(Translate("           Sort for Channel Raster:  "), i_Sort_for_Channel_Raster);
      TrcTrace(Translate("           Channel Raster:  "), channel_raster);
      TrcTrace(Translate("           Maximum Channel:  "), i_Max_Channel);
      if(i_Channel_Type == 0) Trace("           Channel Type:  1 mL");
      else if(i_Channel_Type == 1) Trace("           Channel Type:  5 mL");
      else if(i_Channel_Type == 2) Trace("           Channel Type:  Labware Handler");
      TrcTrace(Translate("________________________________________________________"), Translate(""));
    }
    is_float = HSLExtensions::Array::IsFloatArray(io_Array_of_Variables);
    is_integer = HSLExtensions::Array::IsIntegerArray(io_Array_of_Variables);
    is_string = HSLExtensions::Array::IsStringArray(io_Array_of_Variables);
    val_type1 = 0;
    if(is_float == 1) val_type1 = 1;
    else if(is_integer == 1) val_type1 = 2;
    Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
    Sort_File.AddField("LAB1", lab1, hslString, 255);
    Sort_File.AddField("POS1", pos1, hslString, 255);
    Sort_File.AddField("LAB2", lab2, hslString, 255);
    Sort_File.AddField("POS2", pos2, hslString, 255);
    Sort_File.AddField("VAL1", val1, hslString, 255);
    Sort_File.AddField("VAL2", not_used, hslString, 255);
    Sort_File.AddField("X1", x1, hslFloat);
    Sort_File.AddField("Y1", y1, hslFloat);
    Sort_File.AddField("X2", x2, hslFloat);
    Sort_File.AddField("Y2", y2, hslFloat);
    Sort_File.AddField("STATUS", status, hslString, 255);
    if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    not_used = Translate("-----");
    status = Translate("NOT_DONE");
    {
      for(line_number = 0; line_number < num_to_sort;)
      {
        line_number = line_number + 1;
        io_Sequence_to_Sort.SetCurrentPosition(line_number);
        io_Sequence_to_Sort2.SetCurrentPosition(line_number);
        lab1 = SeqGetLabwareId(io_Sequence_to_Sort);
        pos1 = SeqGetPositionId(io_Sequence_to_Sort);
        lab2 = SeqGetLabwareId(io_Sequence_to_Sort2);
        pos2 = SeqGetPositionId(io_Sequence_to_Sort2);
        DevGetLabwarePositionEx(ML_STAR, lab1, pos1, x1, y1, null, null);
        DevGetLabwarePositionEx(ML_STAR, lab2, pos2, x2, y2, null, null);
        val1=io_Array_of_Variables.GetAt(line_number-1);
        if( 0 == Sort_File.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != Sort_File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Sort_File.RemoveFields();
    arr_line_numbers.SetSize(0);
    prev_x_coord = 0.0;
    prev_y_coord = 999.0;
    {
      for(channel_number = 0; channel_number < i_Max_Channel;)
      {
        channel_number = channel_number + 1;
        prev_y_coord = prev_y_coord - channel_raster;
        restriction_raster = StrConcat8(Translate("AND (X1"), Translate(" = "), prev_x_coord, Translate(" AND "), Translate("Y1"), Translate(" <= "), prev_y_coord, Translate(")"));
        y_max=arr_Y_Max.GetAt(channel_number-1);
        y_min=arr_Y_Min.GetAt(channel_number-1);
        restriction1 = StrConcat8(Translate("(Y1 "), Translate(">= "), y_min, Translate(" AND "), Translate("Y1 "), Translate("<= "), y_max, Translate(")"));
        restriction2 = StrConcat8(Translate("(Y2 "), Translate(">= "), y_min, Translate(" AND "), Translate("Y2 "), Translate("<= "), y_max, Translate(")"));
        num_used=arr_line_numbers.GetSize();
        if (num_used == 0)
        {
          used_exclusion = Translate("");
        }
        else
        {
          used_exclusion = StrConcat2(Translate("AND LINE_NUMBER NOT IN("), Translate(""));
          {
            for(in_index = 0; in_index < num_used;)
            {
              in_index = in_index + 1;
              line_number=arr_line_numbers.GetAt(in_index-1);
              if (in_index != 1)
              {
                used_exclusion = StrConcat2(used_exclusion, Translate(", "));
              }
              used_exclusion = StrConcat2(used_exclusion, line_number);
            }
          }
          used_exclusion = StrConcat2(used_exclusion, Translate(")"));
        }
        order_by = Translate("");
        if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY LAB1 ASC, X1 ASC, Y1 DESC";
        }
        else if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 0)
        {
             order_by = "ORDER BY LAB1 ASC, LINE_NUMBER ASC";
        }
        else if(i_Sort_by_Labware == 0 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY X1 ASC, Y1 DESC";
        }
        else
        {
             order_by = "ORDER BY LINE_NUMBER ASC";
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" AND "), restriction2, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), restriction_raster);
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value == 0)
        {
          prev_x_coord = 0.0;
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" AND "), restriction2, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value > 0)
        {
          filter_sql = StrConcat12(Translate("SELECT * FROM SORT WHERE "), restriction1, Translate(" AND "), restriction2, Translate(""), Translate(""), Translate(""), Translate(""), Translate(" "), used_exclusion, Translate(" "), order_by);
          Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
          Sort_File.AddField("LAB1", lab1, hslString, 255);
          Sort_File.AddField("POS1", pos1, hslString, 255);
          Sort_File.AddField("LAB2", lab2, hslString, 255);
          Sort_File.AddField("POS2", pos2, hslString, 255);
          Sort_File.AddField("VAL1", val1, hslString, 255);
          Sort_File.AddField("VAL2", not_used, hslString, 255);
          Sort_File.AddField("X1", x1, hslFloat);
          Sort_File.AddField("Y1", y1, hslFloat);
          Sort_File.AddField("X2", x2, hslFloat);
          Sort_File.AddField("Y2", y2, hslFloat);
          Sort_File.AddField("STATUS", status, hslString, 255);
          if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
          }
          {
            file_index = 0;
            while (
               (Sort_File.Eof() == 0)
            )
            {
              file_index = file_index + 1;
              if( 0 == Sort_File.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (i_Sort_for_Channel_Raster == 0)
              {
                break;
              }
              if (x1 != prev_x_coord)
              {
                break;
              }
              if (y1 <= prev_y_coord)
              {
                break;
              }
            }
          }
          if( 0 != Sort_File.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          Sort_File.RemoveFields();
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          SeqAdd(o_Sorted_Sequence, lab1, pos1);
          SeqAdd(o_Sorted_Sequence2, lab2, pos2);
          HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, channel_number, 1);
          o_Sorted_Array.SetAt(channel_number-1, val1);
          arr_line_numbers.AddAsLast(line_number);
          prev_x_coord = x1;
          prev_y_coord = y1;
        }
        else
        {
          val1 = Translate("0");
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          o_Sorted_Array.SetAt(channel_number-1, val1);
        }
      }
    }
    o_Sorted_Sequence.SetCurrentPosition(1);
    o_Sorted_Sequence2.SetCurrentPosition(1);
    num_used=arr_line_numbers.GetSize();
    ret_Number_Remaining = num_to_sort - num_used;
    if (num_used == 0)
    {
      TrcTrace(Translate("**********************************  The remaining positions are out of reach for the selected channels!!!!"), Translate(""));
      ErrRaise(101, Translate("The remaining positions are out of reach for all the selected channels!!!!"));
    }
    in_group = StrConcat2(Translate("LINE_NUMBER IN("), Translate(""));
    {
      for(in_index = 0; in_index < num_used;)
      {
        in_index = in_index + 1;
        line_number=arr_line_numbers.GetAt(in_index-1);
        if (in_index != 1)
        {
          in_group = StrConcat2(in_group, Translate(", "));
        }
        in_group = StrConcat2(in_group, line_number);
      }
    }
    in_group = StrConcat2(in_group, Translate(")"));
    update_sql = StrConcat4(Translate("UPDATE SORT SET STATUS = 'DONE' WHERE "), in_group, Translate(""), Translate(""));
    if( 0 == Update_FIle.Open(sort_file + " " + "SORT", hslRead, update_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 != Update_FIle.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Update_FIle.RemoveFields();
    count_sql = StrConcat2(Translate("SELECT COUNT(*) AS N FROM SORT WHERE STATUS = 'NOT_DONE'"), Translate(""));
    Count_Available.AddField("N", count_value, hslInteger);
    if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 == Count_Available.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != Count_Available.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Count_Available.RemoveFields();
    ret_Number_Remaining = count_value;
    if (count_value == 0)
    {
      SeqRemoveAll(io_Sequence_to_Sort);
      SeqRemoveAll(io_Sequence_to_Sort2);
      io_Array_of_Variables.SetSize(0);
    }
    else
    {
      filter_sql = StrConcat2(Translate("SELECT * FROM SORT WHERE STATUS = 'NOT_DONE' ORDER BY LINE_NUMBER ASC"), Translate(""));
      SeqRemoveAll(temp_seq1);
      SeqRemoveAll(temp_seq2);
      arr_temp_array1.SetSize(0);
      Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
      Sort_File.AddField("LAB1", lab1, hslString, 255);
      Sort_File.AddField("POS1", pos1, hslString, 255);
      Sort_File.AddField("LAB2", lab2, hslString, 255);
      Sort_File.AddField("POS2", pos2, hslString, 255);
      Sort_File.AddField("VAL1", val1, hslString, 255);
      Sort_File.AddField("VAL2", not_used, hslString, 255);
      Sort_File.AddField("X1", x1, hslFloat);
      Sort_File.AddField("Y1", y1, hslFloat);
      Sort_File.AddField("X2", x2, hslFloat);
      Sort_File.AddField("Y2", y2, hslFloat);
      Sort_File.AddField("STATUS", status, hslString, 255);
      if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
      }
      {
        while (
           (Sort_File.Eof() == 0)
        )
        {
          if( 0 == Sort_File.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          arr_temp_array1.AddAsLast(val1);
          SeqAdd(temp_seq1, lab1, pos1);
          SeqAdd(temp_seq2, lab2, pos2);
        }
      }
      if( 0 != Sort_File.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      Sort_File.RemoveFields();
      temp_seq1.SetCurrentPosition(1);
      temp_seq2.SetCurrentPosition(1);
      SeqCopySequence(io_Sequence_to_Sort, temp_seq1);
      SeqCopySequence(io_Sequence_to_Sort2, temp_seq2);
      io_Array_of_Variables=arr_temp_array1;
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    return (ret_Number_Remaining);
  }

  function CHAN_ACCESS_Sort2Sequences2Arrays( device & ML_STAR, sequence & io_Sequence_to_Sort, sequence & io_Sequence_to_Sort2, variable & io_Array_of_Variables[], variable & io_Array_of_Variables2[], variable i_Channel_Type, variable i_Sort_by_Labware, variable i_Sort_by_XY, variable i_Sort_for_Channel_Raster, variable i_Max_Channel, sequence & o_Sorted_Sequence, sequence & o_Sorted_Sequence2, variable & o_Sorted_Array[], variable & o_Sorted_Array2[], variable & o_Channel_Pattern ) variable {
    private variable status;
    private variable channel_raster;
    private variable used_exclusion;
    private variable num_in_array2;
    private variable in_group;
    private variable num_to_sort;
    private variable pos1;
    private variable is_string2;
    private variable pos2;
    private variable restriction_raster;
    private variable num_used;
    private variable in_index;
    private variable num_to_sort2;
    private variable update_sql;
    private variable y_min;
    private variable is_float2;
    private variable val1;
    private variable ret_Number_Remaining;
    private variable y_max;
    private variable value_equal;
    private variable sequence_name2;
    private variable total_channels;
    private variable num_in_array;
    private variable num_labhand_channels;
    private variable val2;
    private variable file_index;
    private variable null;
    private variable restriction1;
    private variable not_used;
    private variable sort_file;
    private variable restriction2;
    private variable lab1;
    private variable lab2;
    private variable is_integer2;
    private variable prev_y_coord;
    private variable filter_sql;
    private variable num_1mL_channels;
    private variable prev_x_coord;
    private variable count_sql;
    private variable order_by;
    private variable num_5mL_channels;
    private variable val_type1;
    private variable is_string;
    private variable y1;
    private variable count_value;
    private variable channel_number;
    private variable val_type2;
    private variable y2;
    private variable x1;
    private variable is_integer;
    private variable x2;
    private variable line_number;
    private variable is_float;
    private variable sequence_name;
    private sequence temp_seq1;
    private sequence temp_seq2;
    private file Count_Available;
    private file Update_FIle;
    private file Sort_File;
    private variable arr_temp_array1[];
    private variable arr_temp_array2[];
    private variable arr_Y_Min[];
    private variable arr_Y_Max[];
    private variable arr_line_numbers[];
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable bool_FileExists;
    private variable int_Count;
    { sequence __temp; o_Sorted_Sequence = __temp; }
    { sequence __temp; o_Sorted_Sequence2 = __temp; }
    o_Sorted_Array.SetSize( 0);
    o_Sorted_Array2.SetSize( 0);
    o_Channel_Pattern = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    num_1mL_channels = DevGetCfgValueWithKey(ML_STAR, 1);
    num_5mL_channels = DevGetCfgValueWithKey(ML_STAR, 43);
    num_labhand_channels = DevGetCfgValueWithKey(ML_STAR, 47);
    i_Channel_Type = StrConcat2(i_Channel_Type, Translate(""));
    i_Channel_Type = StrIVal(i_Channel_Type);
    if (i_Channel_Type < 0)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type > 2)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      total_channels = 0;
    }
    if (i_Channel_Type == 0)
    {
      total_channels = num_1mL_channels;
    }
    if (i_Channel_Type == 1)
    {
      total_channels = num_5mL_channels;
    }
    if (i_Channel_Type == 2)
    {
      total_channels = num_labhand_channels;
    }
    o_Channel_Pattern = Translate("");
    if (total_channels == 0)
    {
      if (i_Channel_Type == 0)
      {
        TrcTrace(Translate("****************************  There are no 1 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 1 mL channels installed!!"));
      }
      if (i_Channel_Type == 1)
      {
        TrcTrace(Translate("****************************  There are no 5 mL channels installed!"), Translate(""));
        ErrRaise(101, Translate("No 5 mL channels installed!!"));
      }
      if (i_Channel_Type == 2)
      {
        TrcTrace(Translate("****************************  There are no Lab Handler channels installed!"), Translate(""));
        ErrRaise(101, Translate("No Lab Handler channels installed!!"));
      }
    }
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, io_Sequence_to_Sort);
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, io_Sequence_to_Sort2);
    HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, total_channels, 0);
    i_Max_Channel = StrConcat2(i_Max_Channel, Translate(""));
    i_Max_Channel = StrIVal(i_Max_Channel);
    if (i_Max_Channel <= 0)
    {
      i_Max_Channel = total_channels;
    }
    if (i_Max_Channel > total_channels)
    {
      i_Max_Channel = total_channels;
    }
    ret_Number_Remaining = 0;
    SeqRemoveAll(o_Sorted_Sequence);
    SeqRemoveAll(o_Sorted_Sequence2);
    o_Sorted_Array.SetSize(i_Max_Channel);
    o_Sorted_Array2.SetSize(i_Max_Channel);
    if (i_Channel_Type == 0)
    {
      arr_Y_Max=G_ARR_FW_PIP_COM_YMax;
      arr_Y_Min=G_ARR_FW_PIP_COM_YMin;
      channel_raster = G_FW_PIP_COM_Raster;
    }
    if (i_Channel_Type == 1)
    {
      arr_Y_Max=G_ARR_FW_XL_COM_YMax;
      arr_Y_Min=G_ARR_FW_XL_COM_YMin;
      channel_raster = G_FW_XL_COM_Raster;
    }
    if (i_Channel_Type == 2)
    {
      HELPERLIBRARY::GetChannelLimits(ML_STAR, i_Channel_Type, arr_Y_Max, arr_Y_Min, channel_raster);
    }
    HELPERLIBRARY::GetTempSortingFilePath(sort_file);
    bool_FileExists = HSLExtensions::File::Exists(sort_file);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(sort_file);
    }
    num_to_sort = SeqGetTotal(io_Sequence_to_Sort);
    num_to_sort2 = SeqGetTotal(io_Sequence_to_Sort2);
    sequence_name = SeqGetName(io_Sequence_to_Sort);
    sequence_name2 = SeqGetName(io_Sequence_to_Sort2);
    num_in_array=io_Array_of_Variables.GetSize();
    num_in_array2=io_Array_of_Variables2.GetSize();
    value_equal = 0;
    if(num_to_sort == num_in_array && num_to_sort == num_in_array2 && num_to_sort == num_to_sort2) value_equal = 1;
    if (num_to_sort == 0)
    {
      return (ret_Number_Remaining);
    }
    if (value_equal == 0)
    {
      TrcTrace(Translate("##############  SEQUENCES AND ARRAYS DO NOT HAVE THE SAME NUMBER OF POSITIONS."), Translate(""));
      ErrRaise(101, Translate("Sequences and arrays do not have the same number of positions."));
    }
    if(0){
      TrcTrace(Translate("________________________________________________________"), Translate(""));
      TrcTrace(Translate(""), Translate(""));
      TrcTrace4(Translate("           Sequence to Sort:  "), sequence_name, Translate("     Second Sequence to Sort:  "), sequence_name2);
      TrcTrace(Translate("           Number of Positions in Sequence:  "), num_to_sort);
      TrcTrace(Translate("           Sort by Labware:  "), i_Sort_by_Labware);
      TrcTrace(Translate("           Sort by XY:  "), i_Sort_by_XY);
      TrcTrace(Translate("           Sort for Channel Raster:  "), i_Sort_for_Channel_Raster);
      TrcTrace(Translate("           Channel Raster:  "), channel_raster);
      TrcTrace(Translate("           Maximum Channel:  "), i_Max_Channel);
      if(i_Channel_Type == 0) Trace("           Channel Type:  1 mL");
      else if(i_Channel_Type == 1) Trace("           Channel Type:  5 mL");
      else if(i_Channel_Type == 2) Trace("           Channel Type:  Labware Handler");
      TrcTrace(Translate("________________________________________________________"), Translate(""));
    }
    is_float = HSLExtensions::Array::IsFloatArray(io_Array_of_Variables);
    is_integer = HSLExtensions::Array::IsIntegerArray(io_Array_of_Variables);
    is_string = HSLExtensions::Array::IsStringArray(io_Array_of_Variables);
    is_float2 = HSLExtensions::Array::IsFloatArray(io_Array_of_Variables2);
    is_integer2 = HSLExtensions::Array::IsIntegerArray(io_Array_of_Variables2);
    is_string2 = HSLExtensions::Array::IsStringArray(io_Array_of_Variables2);
    val_type1 = 0;
    val_type2 = 0;
    if(is_float == 1) val_type1 = 1;
    else if(is_integer == 1) val_type1 = 2;
    if(is_float2 == 1) val_type2 = 1;
    else if(is_integer2 == 1) val_type2 = 2;
    Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
    Sort_File.AddField("LAB1", lab1, hslString, 255);
    Sort_File.AddField("POS1", pos1, hslString, 255);
    Sort_File.AddField("LAB2", lab2, hslString, 255);
    Sort_File.AddField("POS2", pos2, hslString, 255);
    Sort_File.AddField("VAL1", val1, hslString, 255);
    Sort_File.AddField("VAL2", val2, hslString, 255);
    Sort_File.AddField("X1", x1, hslFloat);
    Sort_File.AddField("Y1", y1, hslFloat);
    Sort_File.AddField("X2", x2, hslFloat);
    Sort_File.AddField("Y2", y2, hslFloat);
    Sort_File.AddField("STATUS", status, hslString, 255);
    if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    not_used = Translate("-----");
    status = Translate("NOT_DONE");
    {
      for(line_number = 0; line_number < num_to_sort;)
      {
        line_number = line_number + 1;
        io_Sequence_to_Sort.SetCurrentPosition(line_number);
        io_Sequence_to_Sort2.SetCurrentPosition(line_number);
        lab1 = SeqGetLabwareId(io_Sequence_to_Sort);
        pos1 = SeqGetPositionId(io_Sequence_to_Sort);
        lab2 = SeqGetLabwareId(io_Sequence_to_Sort2);
        pos2 = SeqGetPositionId(io_Sequence_to_Sort2);
        DevGetLabwarePositionEx(ML_STAR, lab1, pos1, x1, y1, null, null);
        DevGetLabwarePositionEx(ML_STAR, lab2, pos2, x2, y2, null, null);
        val1=io_Array_of_Variables.GetAt(line_number-1);
        val2=io_Array_of_Variables2.GetAt(line_number-1);
        if( 0 == Sort_File.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != Sort_File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Sort_File.RemoveFields();
    arr_line_numbers.SetSize(0);
    prev_x_coord = 0.0;
    prev_y_coord = 999.0;
    {
      for(channel_number = 0; channel_number < i_Max_Channel;)
      {
        channel_number = channel_number + 1;
        prev_y_coord = prev_y_coord - channel_raster;
        restriction_raster = StrConcat8(Translate("AND (X1"), Translate(" = "), prev_x_coord, Translate(" AND "), Translate("Y1"), Translate(" <= "), prev_y_coord, Translate(")"));
        y_max=arr_Y_Max.GetAt(channel_number-1);
        y_min=arr_Y_Min.GetAt(channel_number-1);
        restriction1 = StrConcat8(Translate("(Y1 "), Translate(">= "), y_min, Translate(" AND "), Translate("Y1 "), Translate("<= "), y_max, Translate(")"));
        restriction2 = StrConcat8(Translate("(Y2 "), Translate(">= "), y_min, Translate(" AND "), Translate("Y2 "), Translate("<= "), y_max, Translate(")"));
        num_used=arr_line_numbers.GetSize();
        if (num_used == 0)
        {
          used_exclusion = Translate("");
        }
        else
        {
          used_exclusion = StrConcat2(Translate("AND LINE_NUMBER NOT IN("), Translate(""));
          {
            for(in_index = 0; in_index < num_used;)
            {
              in_index = in_index + 1;
              line_number=arr_line_numbers.GetAt(in_index-1);
              if (in_index != 1)
              {
                used_exclusion = StrConcat2(used_exclusion, Translate(", "));
              }
              used_exclusion = StrConcat2(used_exclusion, line_number);
            }
          }
          used_exclusion = StrConcat2(used_exclusion, Translate(")"));
        }
        order_by = Translate("");
        if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY LAB1 ASC, X1 ASC, Y1 DESC";
        }
        else if(i_Sort_by_Labware == 1 && i_Sort_by_XY == 0)
        {
             order_by = "ORDER BY LAB1 ASC, LINE_NUMBER ASC";
        }
        else if(i_Sort_by_Labware == 0 && i_Sort_by_XY == 1)
        {
             order_by = "ORDER BY X1 ASC, Y1 DESC";
        }
        else
        {
             order_by = "ORDER BY LINE_NUMBER ASC";
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" AND "), restriction2, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), restriction_raster);
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value == 0)
        {
          prev_x_coord = 0.0;
        }
        count_sql = StrConcat12(Translate("SELECT COUNT(*) AS N FROM SORT WHERE "), restriction1, Translate(" AND "), restriction2, Translate(" "), used_exclusion, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Count_Available.AddField("N", count_value, hslInteger);
        if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
        }
        if( 0 == Count_Available.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Count_Available.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Count_Available.RemoveFields();
        if (count_value > 0)
        {
          filter_sql = StrConcat12(Translate("SELECT * FROM SORT WHERE "), restriction1, Translate(" AND "), restriction2, Translate(""), Translate(""), Translate(""), Translate(""), Translate(" "), used_exclusion, Translate(" "), order_by);
          Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
          Sort_File.AddField("LAB1", lab1, hslString, 255);
          Sort_File.AddField("POS1", pos1, hslString, 255);
          Sort_File.AddField("LAB2", lab2, hslString, 255);
          Sort_File.AddField("POS2", pos2, hslString, 255);
          Sort_File.AddField("VAL1", val1, hslString, 255);
          Sort_File.AddField("VAL2", val2, hslString, 255);
          Sort_File.AddField("X1", x1, hslFloat);
          Sort_File.AddField("Y1", y1, hslFloat);
          Sort_File.AddField("X2", x2, hslFloat);
          Sort_File.AddField("Y2", y2, hslFloat);
          Sort_File.AddField("STATUS", status, hslString, 255);
          if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
          }
          {
            file_index = 0;
            while (
               (Sort_File.Eof() == 0)
            )
            {
              file_index = file_index + 1;
              if( 0 == Sort_File.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (i_Sort_for_Channel_Raster == 0)
              {
                break;
              }
              if (x1 != prev_x_coord)
              {
                break;
              }
              if (y1 <= prev_y_coord)
              {
                break;
              }
            }
          }
          if( 0 != Sort_File.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          Sort_File.RemoveFields();
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          if(val_type2 == 1) val2 = FVal(val2);
          else if(val_type2 == 2) val2 = IVal(val2);
          SeqAdd(o_Sorted_Sequence, lab1, pos1);
          SeqAdd(o_Sorted_Sequence2, lab2, pos2);
          HELPERLIBRARY::Set_Channel_Pattern(o_Channel_Pattern, channel_number, 1);
          o_Sorted_Array.SetAt(channel_number-1, val1);
          o_Sorted_Array2.SetAt(channel_number-1, val2);
          arr_line_numbers.AddAsLast(line_number);
          prev_x_coord = x1;
          prev_y_coord = y1;
        }
        else
        {
          val1 = Translate("0");
          val2 = Translate("0");
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          if(val_type2 == 1) val2 = FVal(val2);
          else if(val_type2 == 2) val2 = IVal(val2);
          o_Sorted_Array.SetAt(channel_number-1, val1);
          o_Sorted_Array2.SetAt(channel_number-1, val2);
        }
      }
    }
    o_Sorted_Sequence.SetCurrentPosition(1);
    o_Sorted_Sequence2.SetCurrentPosition(1);
    num_used=arr_line_numbers.GetSize();
    ret_Number_Remaining = num_to_sort - num_used;
    if (num_used == 0)
    {
      TrcTrace(Translate("**********************************  The remaining positions are out of reach for the selected channels!!!!"), Translate(""));
      ErrRaise(101, Translate("The remaining positions are out of reach for all the selected channels!!!!"));
    }
    in_group = StrConcat2(Translate("LINE_NUMBER IN("), Translate(""));
    {
      for(in_index = 0; in_index < num_used;)
      {
        in_index = in_index + 1;
        line_number=arr_line_numbers.GetAt(in_index-1);
        if (in_index != 1)
        {
          in_group = StrConcat2(in_group, Translate(", "));
        }
        in_group = StrConcat2(in_group, line_number);
      }
    }
    in_group = StrConcat2(in_group, Translate(")"));
    update_sql = StrConcat4(Translate("UPDATE SORT SET STATUS = 'DONE' WHERE "), in_group, Translate(""), Translate(""));
    if( 0 == Update_FIle.Open(sort_file + " " + "SORT", hslRead, update_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 != Update_FIle.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Update_FIle.RemoveFields();
    count_sql = StrConcat2(Translate("SELECT COUNT(*) AS N FROM SORT WHERE STATUS = 'NOT_DONE'"), Translate(""));
    Count_Available.AddField("N", count_value, hslInteger);
    if( 0 == Count_Available.Open(sort_file + " " + "SORT", hslRead, count_sql) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
    }
    if( 0 == Count_Available.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != Count_Available.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Count_Available.RemoveFields();
    ret_Number_Remaining = count_value;
    if (count_value == 0)
    {
      SeqRemoveAll(io_Sequence_to_Sort);
      SeqRemoveAll(io_Sequence_to_Sort2);
      io_Array_of_Variables.SetSize(0);
      io_Array_of_Variables2.SetSize(0);
    }
    else
    {
      filter_sql = StrConcat2(Translate("SELECT * FROM SORT WHERE STATUS = 'NOT_DONE' ORDER BY LINE_NUMBER ASC"), Translate(""));
      SeqRemoveAll(temp_seq1);
      SeqRemoveAll(temp_seq2);
      arr_temp_array1.SetSize(0);
      arr_temp_array2.SetSize(0);
      Sort_File.AddField("LINE_NUMBER", line_number, hslInteger);
      Sort_File.AddField("LAB1", lab1, hslString, 255);
      Sort_File.AddField("POS1", pos1, hslString, 255);
      Sort_File.AddField("LAB2", lab2, hslString, 255);
      Sort_File.AddField("POS2", pos2, hslString, 255);
      Sort_File.AddField("VAL1", val1, hslString, 255);
      Sort_File.AddField("VAL2", val2, hslString, 255);
      Sort_File.AddField("X1", x1, hslFloat);
      Sort_File.AddField("Y1", y1, hslFloat);
      Sort_File.AddField("X2", x2, hslFloat);
      Sort_File.AddField("Y2", y2, hslFloat);
      Sort_File.AddField("STATUS", status, hslString, 255);
      if( 0 == Sort_File.Open(sort_file + " " + "SORT", hslRead, filter_sql) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, sort_file, "HxMetEdCompCmd");
      }
      {
        while (
           (Sort_File.Eof() == 0)
        )
        {
          if( 0 == Sort_File.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          // This converts the array values back to their original state
          if(val_type1 == 1) val1 = FVal(val1);
          else if(val_type1 == 2) val1 = IVal(val1);
          if(val_type2 == 1) val2 = FVal(val2);
          else if(val_type2 == 2) val2 = IVal(val2);
          arr_temp_array1.AddAsLast(val1);
          arr_temp_array2.AddAsLast(val2);
          SeqAdd(temp_seq1, lab1, pos1);
          SeqAdd(temp_seq2, lab2, pos2);
        }
      }
      if( 0 != Sort_File.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      Sort_File.RemoveFields();
      temp_seq1.SetCurrentPosition(1);
      temp_seq2.SetCurrentPosition(1);
      SeqCopySequence(io_Sequence_to_Sort, temp_seq1);
      SeqCopySequence(io_Sequence_to_Sort2, temp_seq2);
      io_Array_of_Variables=arr_temp_array1;
      io_Array_of_Variables2=arr_temp_array2;
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    return (ret_Number_Remaining);
  }

  function TRAVEL_LANES_MoveChannelsWithTravelLanes( device & ML_STAR, sequence i_seq_TargetSequence, variable i_flt_XOffsetFromOrigin ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_LabID;
    private variable bool_SequenceValid;
    private variable str_PosID;
    private variable flt_X_Origin;
    private variable flt_NotUsed;
    private variable flt_StartLocation;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(ML_STAR, i_seq_TargetSequence, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    TRAVEL_LANES::MoveChannelsToTravelLanes(ML_STAR);
    HELPERLIBRARY::GetLabwareOrigin(ML_STAR, str_LabID, flt_X_Origin, flt_NotUsed, flt_NotUsed);
    flt_StartLocation = flt_X_Origin + i_flt_XOffsetFromOrigin;
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    TRAVEL_LANES::MoveChannelsToSequencePosition(ML_STAR, i_seq_TargetSequence);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  private function _FunctionError( variable i_str_FunctionName, variable i_str_ErrorDescription ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable str_ErrorDescription;
    private variable strFunctionName;
    private variable int_Count;
    int_Count = StrReverseFind(i_str_FunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(i_str_FunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName = StrMid(i_str_FunctionName, int_Count, int_CutNum);
    str_ErrorDescription = StrConcat8(strFunctionName, Translate("\n\n"), i_str_ErrorDescription, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    ErrRaise(101, str_ErrorDescription);
  }

  private function _GetSequencePosition( device & Instrument, sequence i_seq_LabwareSequence, variable & o_str_LabID, variable & o_str_PosID ) variable {
    private variable bool_SequenceValid;
    o_str_LabID = 0;
    o_str_PosID = 0;
    bool_SequenceValid = 1;
    o_str_LabID = Translate("");
    o_str_PosID = Translate("");
    onerror goto errLabel_1 ;
    err.Clear();
    o_str_LabID = SeqGetLabwareId(i_seq_LabwareSequence);
    o_str_PosID = SeqGetPositionId(i_seq_LabwareSequence);
    if (o_str_LabID == "")
    {
      bool_SequenceValid = 0;
    }
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      bool_SequenceValid = 0;
    }   /* end if from skip handler if no error */
    return (bool_SequenceValid);
  }

  function TRAVEL_LANES_MoveChannelsToTravelLanes( device & ML_STAR ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    TRAVEL_LANES::MoveChannelsToTravelLanes(ML_STAR);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function TRAVEL_LANES_SingleSource_ChannelDisplacement( device & ML_STAR, variable i_strStepReturn ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    TRAVEL_LANES::MoveUsedChannel(ML_STAR, i_strStepReturn);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function LIQUID_LEVEL_ReturnVolumesFromLiquidLevel( device & ML_STAR, variable i_str_PipettingReturn, variable i_str_LiquidLevelReturn, variable i_bool_ConvertTouL, variable & o_arr_VolumesMeasured[] ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable int_Total1mLChannels;
    private variable int_Channel;
    private variable str_LabID;
    private variable flt_LiquidHeight;
    private variable flt_Volume;
    private variable str_PosID;
    private variable stringPos;
    private sequence seq_Temp;
    o_arr_VolumesMeasured.SetSize( 0);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    int_Total1mLChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    Trace("     ","Total Channels:  ",int_Total1mLChannels);
    if (int_Total1mLChannels == 0)
    {
      MECC::TraceComment(Translate("=========================================\n\nNO 1mL CHANNELS ARE LOADED ON THE SYSTEM!\n\n========================================="));
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      return;
    }
    o_arr_VolumesMeasured.SetSize(0);
    {
      for(int_Channel = 0; int_Channel < int_Total1mLChannels;)
      {
        int_Channel = int_Channel + 1;
        o_arr_VolumesMeasured.AddAsLast(0.0);
      }
    }
    {
      for(int_Channel = 0; int_Channel < int_Total1mLChannels;)
      {
        int_Channel = int_Channel + 1;
        stringPos = StepReturn::GetPositionFromNum(int_Channel, i_str_PipettingReturn);
        str_LabID = StepReturn::GetLabwareId(stringPos, i_str_PipettingReturn);
        str_PosID = StepReturn::GetPositionId(stringPos, i_str_PipettingReturn);
        int_Length = StrGetLength(str_LabID);
        if (int_Length > 0)
        {
          SeqRemoveAll(seq_Temp);
          SeqAdd(seq_Temp, str_LabID, str_PosID);
          seq_Temp.SetCurrentPosition(1);
          LIQUID_LEVEL_CHECK::FindLiquidHeight(ML_STAR, i_str_LiquidLevelReturn, seq_Temp, int_Channel, flt_LiquidHeight);
          flt_Volume = DevComputeContainerVolume2(ML_STAR, str_LabID, str_PosID, flt_LiquidHeight, 0, 0);
          if (i_bool_ConvertTouL == 1)
          {
            flt_Volume = flt_Volume * 1000.0;
            Trace("**************",str_LabID," - ",str_PosID,": ",flt_Volume," uL");
          }
          else
          {
            Trace("**************",str_LabID," - ",str_PosID,": ",flt_Volume," mL");
          }
          if (flt_Volume > 0.0)
          {
            o_arr_VolumesMeasured.SetAt(int_Channel-1, flt_Volume);
          }
        }
      }
    }
    Util2::Debug::TraceArray(Translate("Volumes detected"), o_arr_VolumesMeasured);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function TRAVEL_LANES_MoveChannelsToTravelLanes_5mL( device & ML_STAR ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    TRAVEL_LANES::MoveChannelsToTravelLanes_5mL(ML_STAR);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function TRAVEL_LANES_MoveChannelsWithTravelLanes_5mL( device & ML_STAR, sequence i_seq_TargetSequence, variable i_flt_XOffsetFromOrigin ) void {
    private variable flt_X_Origin;
    private variable int_CutNum;
    private variable int_Length;
    private variable flt_NotUsed;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable str_LabID;
    private variable int_Count;
    private variable bool_SequenceValid;
    private variable str_PosID;
    private variable flt_StartLocation;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(ML_STAR, i_seq_TargetSequence, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    TRAVEL_LANES::MoveChannelsToTravelLanes_5mL(ML_STAR);
    HELPERLIBRARY::GetLabwareOrigin(ML_STAR, str_LabID, flt_X_Origin, flt_NotUsed, flt_NotUsed);
    flt_StartLocation = flt_X_Origin + i_flt_XOffsetFromOrigin;
    ML_STAR._55AA8CFA_FB6C_4691_8C8C_8D410E2123FD("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"); // XLMoveToPosition
    TRAVEL_LANES::MoveChannelsToSequencePosition_5mL(ML_STAR, i_seq_TargetSequence);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function TRAVEL_LANES_SingleSource_ChannelDisplacement_5mL( device & ML_STAR, variable i_strStepReturn ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    TRAVEL_LANES::MoveUsedChannel_5mL(ML_STAR, i_strStepReturn);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function QUERY_GetChannelPosition( device & ML_STAR, variable i_int_ChNumber, variable & o_flt_XCoord, variable & o_flt_YCoord, variable & o_flt_ZCoord ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable o_flt_Zcoord;
    o_flt_XCoord = 0;
    o_flt_YCoord = 0;
    o_flt_ZCoord = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      STAR_CHANNEL_MOVEMENT_TOOLS::Get_Channel_Position_1mL(ML_STAR, i_int_ChNumber, o_flt_XCoord, o_flt_YCoord, o_flt_ZCoord);
    }
    else
    {
      VANTAGE_CHANNEL_MOVEMENT_TOOLS::Get_Channel_Position(ML_STAR, i_int_ChNumber, o_flt_XCoord, o_flt_YCoord, o_flt_Zcoord);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function QUERY_GetChannelPosition_5mL( device & ML_STAR, variable i_int_ChNumber, variable & o_flt_XCoord, variable & o_flt_YCoord, variable & o_flt_ZCoord ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    o_flt_XCoord = 0;
    o_flt_YCoord = 0;
    o_flt_ZCoord = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      STAR_CHANNEL_MOVEMENT_TOOLS::Get_Channel_Position_5mL(ML_STAR, i_int_ChNumber, o_flt_XCoord, o_flt_YCoord, o_flt_ZCoord);
    }
    else
    {
      VANTAGE_CHANNEL_MOVEMENT_TOOLS::Get_Channel_Position_5mL(ML_STAR, i_int_ChNumber, o_flt_XCoord, o_flt_YCoord, o_flt_ZCoord);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function QUERY_GetTipVolume( device & ML_STAR, variable i_int_ChNumber, variable & o_flt_MaxVolume, variable & o_flt_CurrentChannelVolume ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    o_flt_MaxVolume = 0;
    o_flt_CurrentChannelVolume = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      STAR_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Volume_1mL(ML_STAR, i_int_ChNumber, o_flt_MaxVolume, o_flt_CurrentChannelVolume);
    }
    else
    {
      VANTAGE_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Volume_1mL(ML_STAR, i_int_ChNumber, o_flt_MaxVolume, o_flt_CurrentChannelVolume);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function QUERY_GetTipVolume_5mL( device & ML_STAR, variable i_int_ChNumber, variable & o_flt_MaxVolume, variable & o_flt_CurrentChannelVolume ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    o_flt_MaxVolume = 0;
    o_flt_CurrentChannelVolume = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      STAR_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Volume_5mL(ML_STAR, i_int_ChNumber, o_flt_MaxVolume, o_flt_CurrentChannelVolume);
    }
    else
    {
      VANTAGE_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Volume_5mL(ML_STAR, i_int_ChNumber, o_flt_MaxVolume, o_flt_CurrentChannelVolume);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function QUERY_GetTipPresentState( device & ML_STAR, variable i_int_ChNumber, variable & o_bln_TipPresent ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    o_bln_TipPresent = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      STAR_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Present_1mL(ML_STAR, i_int_ChNumber, o_bln_TipPresent);
    }
    else
    {
      VANTAGE_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Present_1mL(ML_STAR, i_int_ChNumber, o_bln_TipPresent);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function QUERY_GetTipPresentState_5mL( device & ML_STAR, variable i_int_ChNumber, variable & o_bln_TipPresent ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    o_bln_TipPresent = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      STAR_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Present_5mL(ML_STAR, i_int_ChNumber, o_bln_TipPresent);
    }
    else
    {
      VANTAGE_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Present_5mL(ML_STAR, i_int_ChNumber, o_bln_TipPresent);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function MOVE_InitDispenseDrive( device & ML_STAR, variable i_int_ChNumber ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      STAR_CHANNEL_MOVEMENT_TOOLS::InitializeDispenseDrive_1mL(ML_STAR, i_int_ChNumber);
    }
    else
    {
      VANTAGE_CHANNEL_MOVEMENT_TOOLS::InitializeDispenseDrive_1mL(ML_STAR, i_int_ChNumber);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function MOVE_InitDispenseDrive_5mL( device & ML_STAR, variable i_int_ChNumber ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      STAR_CHANNEL_MOVEMENT_TOOLS::InitializeDispenseDrive_5mL(ML_STAR, i_int_ChNumber);
    }
    else
    {
      VANTAGE_CHANNEL_MOVEMENT_TOOLS::InitializeDispenseDrive_5mL(ML_STAR, i_int_ChNumber);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function MOVE_CheckPlateWithTwoChannels( device & ML_STAR, variable i_int_FrontMostChannel, sequence i_seq_PlateToCheck, variable i_flt_TapWidth ) variable {
    private variable ret_PlateExists;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable num_1mL_channels;
    private variable str_LabID;
    private variable int_BackChannel;
    private variable bln_TipPresentBack;
    private variable bln_TipPresentFront;
    private variable str_ReturnValue;
    private variable str_FWParameter;
    private variable flt_ZSpeed;
    private variable str_FWCommand;
    private variable flt_SearchSpeed;
    private variable flt_ZIncremenToMM;
    private variable int_ZSpeed;
    private variable str_ZV;
    private variable str_ZSpeed;
    private variable flt_NotUsed;
    private variable flt_ZBottom;
    private variable flt_RackClearance;
    private variable flt_RackHeight;
    private variable flt_MinimumSearchHeight;
    private variable flt_XCenter;
    private variable flt_YCenter;
    private variable bln_PlateFound;
    private variable arr_ChPattern[];
    private variable arr_YPosition[];
    private variable arr_ZPosition[];
    private variable int_ChIndex;
    private variable flt_BackChannel_X;
    private variable flt_BackChannel_Y;
    private variable flt_BackChannel_Z;
    private variable flt_FrontChannel_X;
    private variable flt_FrontChannel_Y;
    private variable flt_FrontChannel_Z;
    private variable str_ChPattern;
    private variable arr_XPosition[];
    private variable flt_FrontChannel_YCenter;
    private variable flt_BackChannel_YCenter;
    private variable bln_SimMode;
    private variable flt_YOffset;
    ret_PlateExists = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    bln_SimMode = Util::GetSimulationMode();
    if (i_flt_TapWidth < 9.0)
    {
      i_flt_TapWidth = 9.0;
    }
    if (i_flt_TapWidth > 128.0)
    {
      i_flt_TapWidth = 128.0;
    }
    flt_ZIncremenToMM = 0.01072765;
    flt_SearchSpeed = 45.0;
    num_1mL_channels = DevGetCfgValueWithKey(ML_STAR, 1);
    str_LabID = SeqGetLabwareId(i_seq_PlateToCheck);
    int_Length = StrGetLength(str_LabID);
    if (num_1mL_channels == 0)
    {
      TrcTrace(Translate("****************************  There are no 1 mL channels installed!"), Translate(""));
      ErrRaise(101, Translate("No 1 mL channels installed!!"));
    }
    if (i_int_FrontMostChannel < 2)
    {
      TrcTrace(Translate("****************************  Front channel is less than 2!"), Translate(""));
      ErrRaise(101, Translate("Front channel is less than 2!"));
    }
    if (i_int_FrontMostChannel > num_1mL_channels)
    {
      TrcTrace(Translate("****************************  Front channel is greater than the number of channels loaded!"), Translate(""));
      ErrRaise(101, Translate("Front channel is greater than the number of channels loaded!"));
    }
    if (int_Length == 0)
    {
      TrcTrace(Translate("****************************  Sequence position does not have a labware!"), Translate(""));
      ErrRaise(101, Translate("Sequence position does not have a labware!"));
    }
    int_BackChannel = i_int_FrontMostChannel - 1;
    if (bln_SimMode == 0)
    {
      if (G_FW_PIP_COM_InstrumentType > 2)
      {
        VANTAGE_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Present_1mL(ML_STAR, int_BackChannel, bln_TipPresentBack);
        VANTAGE_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Present_1mL(ML_STAR, i_int_FrontMostChannel, bln_TipPresentFront);
      }
      else
      {
        STAR_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Present_1mL(ML_STAR, int_BackChannel, bln_TipPresentBack);
        STAR_CHANNEL_MOVEMENT_TOOLS::Get_Tip_Present_1mL(ML_STAR, i_int_FrontMostChannel, bln_TipPresentFront);
      }
    }
    else
    {
      bln_TipPresentBack = 1;
      bln_TipPresentFront = 1;
    }
    Trace("Back channel present:  ",bln_TipPresentBack);
    Trace("Front channel present:  ",bln_TipPresentFront);
    if (bln_TipPresentBack == 0)
    {
      TrcTrace(Translate("****************************  Channel does not have a tip or tool!"), Translate(""));
      ErrRaise(101, Translate("Channels do not have a tip or tool loaded!"));
    }
    if (bln_TipPresentFront == 0)
    {
      TrcTrace(Translate("****************************  Channel does not have a tip or tool!"), Translate(""));
      ErrRaise(101, Translate("Channels do not have a tip or tool loaded!"));
    }
    LPQ::LABWARE_GetLabwareOrigin(ML_STAR, i_seq_PlateToCheck, flt_NotUsed, flt_NotUsed, flt_ZBottom);
    LPQ::LABWARE_GetRackHeight(ML_STAR, i_seq_PlateToCheck, 1, flt_RackHeight, flt_RackClearance);
    LPQ::LABWARE_GetLabwareCenter(ML_STAR, i_seq_PlateToCheck, flt_XCenter, flt_YCenter);
    flt_MinimumSearchHeight = flt_RackHeight - flt_ZBottom;
    flt_MinimumSearchHeight = flt_MinimumSearchHeight / (2 * 1.0);
    flt_MinimumSearchHeight = flt_MinimumSearchHeight + flt_ZBottom;
    if (G_FW_PIP_COM_InstrumentType > 2)
    {
      bln_PlateFound = VANTAGE_CHANNEL_MOVEMENT_TOOLS::CheckPlateWithTwoChannels(ML_STAR, flt_XCenter, flt_YCenter, flt_MinimumSearchHeight, flt_SearchSpeed, i_flt_TapWidth, 245.0, 245.0, int_BackChannel, i_int_FrontMostChannel, flt_ZBottom);
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      if(bln_PlateFound == 1) ret_PlateExists = hslTrue;
      if(bln_PlateFound == 0) ret_PlateExists = hslFalse;
      return (ret_PlateExists);
    }
    arr_ChPattern.SetSize(0);
    arr_XPosition.SetSize(0);
    arr_YPosition.SetSize(0);
    arr_ZPosition.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < num_1mL_channels;)
      {
        int_ChIndex = int_ChIndex + 1;
        arr_ChPattern.AddAsLast(0);
        arr_XPosition.AddAsLast(flt_XCenter);
        arr_YPosition.AddAsLast(0.0);
        arr_ZPosition.AddAsLast(245.0);
      }
    }
    flt_YOffset = i_flt_TapWidth / (2.0 * 1.0);
    flt_YOffset = flt_YOffset + 4.5;
    flt_FrontChannel_YCenter = flt_YCenter - flt_YOffset;
    flt_BackChannel_YCenter = flt_YCenter + flt_YOffset;
    arr_ChPattern.SetAt(i_int_FrontMostChannel-1, 1);
    arr_ChPattern.SetAt(int_BackChannel-1, 1);
    arr_YPosition.SetAt(i_int_FrontMostChannel-1, flt_FrontChannel_YCenter);
    arr_YPosition.SetAt(int_BackChannel-1, flt_BackChannel_YCenter);
    str_ChPattern = Translate("");
    {
      for(int_ChIndex = 0; int_ChIndex < num_1mL_channels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChPattern = StrConcat2(str_ChPattern, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    STAR_CHANNEL_MOVEMENT_TOOLS::Move_Channels_To_Absolute_Position_1mL(ML_STAR, str_ChPattern, 245.0, arr_XPosition, arr_YPosition, arr_ZPosition);
    arr_ChPattern.SetSize(0);
    arr_XPosition.SetSize(0);
    arr_YPosition.SetSize(0);
    arr_ZPosition.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < num_1mL_channels;)
      {
        int_ChIndex = int_ChIndex + 1;
        arr_ChPattern.AddAsLast(0);
        arr_XPosition.AddAsLast(flt_XCenter);
        arr_YPosition.AddAsLast(0.0);
        arr_ZPosition.AddAsLast(245.0);
      }
    }
    flt_YOffset = i_flt_TapWidth / (2.0 * 1.0);
    flt_FrontChannel_YCenter = flt_YCenter - flt_YOffset;
    flt_BackChannel_YCenter = flt_YCenter + flt_YOffset;
    arr_ChPattern.SetAt(i_int_FrontMostChannel-1, 1);
    arr_ChPattern.SetAt(int_BackChannel-1, 1);
    arr_YPosition.SetAt(i_int_FrontMostChannel-1, flt_FrontChannel_YCenter);
    arr_YPosition.SetAt(int_BackChannel-1, flt_BackChannel_YCenter);
    str_ChPattern = Translate("");
    {
      for(int_ChIndex = 0; int_ChIndex < num_1mL_channels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChPattern = StrConcat2(str_ChPattern, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    STAR_CHANNEL_MOVEMENT_TOOLS::Move_Channels_To_Absolute_Position_1mL(ML_STAR, str_ChPattern, 245.0, arr_XPosition, arr_YPosition, arr_ZPosition);
    MECC::TraceComment(Translate("Change Z speed and sensitivity"));
    flt_ZSpeed = flt_SearchSpeed / (flt_ZIncremenToMM * 1.0);
    int_ZSpeed = MthCeiling(flt_ZSpeed);
    str_ZSpeed = StrConcat2(int_ZSpeed, Translate(""));
    str_ZSpeed = StrFillLeft(str_ZSpeed, Translate("0"), 5);
    str_ZV = StrConcat4(Translate("zv"), str_ZSpeed, Translate(""), Translate(""));
    str_FWCommand = Translate("PXAA");
    str_FWParameter = StrConcat8(Translate("zr005zw1"), str_ZV, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    bln_PlateFound = STAR_CHANNEL_MOVEMENT_TOOLS::CheckPlateWithTwoChannels(ML_STAR, flt_XCenter, flt_YCenter, flt_MinimumSearchHeight, flt_SearchSpeed, i_flt_TapWidth, 245.0, flt_MinimumSearchHeight, int_BackChannel, i_int_FrontMostChannel);
    MECC::TraceComment(Translate("Reset the speed back to normal"));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    STAR_CHANNEL_MOVEMENT_TOOLS::Get_Channel_Position_1mL(ML_STAR, int_BackChannel, flt_BackChannel_X, flt_BackChannel_Y, flt_BackChannel_Z);
    STAR_CHANNEL_MOVEMENT_TOOLS::Get_Channel_Position_1mL(ML_STAR, i_int_FrontMostChannel, flt_FrontChannel_X, flt_FrontChannel_Y, flt_FrontChannel_Z);
    arr_ChPattern.SetSize(0);
    arr_XPosition.SetSize(0);
    arr_YPosition.SetSize(0);
    arr_ZPosition.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < num_1mL_channels;)
      {
        int_ChIndex = int_ChIndex + 1;
        arr_ChPattern.AddAsLast(0);
        arr_XPosition.AddAsLast(flt_XCenter);
        arr_YPosition.AddAsLast(0.0);
        arr_ZPosition.AddAsLast(245.0);
      }
    }
    arr_ChPattern.SetAt(i_int_FrontMostChannel-1, 1);
    arr_ChPattern.SetAt(int_BackChannel-1, 1);
    arr_YPosition.SetAt(i_int_FrontMostChannel-1, flt_FrontChannel_Y);
    arr_YPosition.SetAt(int_BackChannel-1, flt_BackChannel_Y);
    str_ChPattern = Translate("");
    {
      for(int_ChIndex = 0; int_ChIndex < num_1mL_channels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChPattern = StrConcat2(str_ChPattern, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    STAR_CHANNEL_MOVEMENT_TOOLS::Move_Channels_To_Absolute_Position_1mL(ML_STAR, str_ChPattern, 245.0, arr_XPosition, arr_YPosition, arr_ZPosition);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    if(bln_PlateFound == 1) ret_PlateExists = hslTrue;
    if(bln_PlateFound == 0) ret_PlateExists = hslFalse;
    return (ret_PlateExists);
  }

  function MOVE_ChannelsToSequencePosition( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_Positions, variable i_flt_ZHeight ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable num_1mL_channels;
    private variable arr_XCoord[];
    private variable arr_ChPattern[];
    private variable arr_YCoord[];
    private variable arr_ZCoord[];
    private variable int_ChIndex;
    private variable str_Left;
    private variable str_Value;
    private variable flt_ZCoord;
    private variable flt_YCoord;
    private variable flt_XCoord;
    private variable str_LabID;
    private variable int_Value;
    private variable str_ChPattern;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    num_1mL_channels = DevGetCfgValueWithKey(ML_STAR, 1);
    if (num_1mL_channels == 0)
    {
      TrcTrace(Translate("****************************  There are no 1 mL channels installed!"), Translate(""));
      ErrRaise(101, Translate("No 1 mL channels installed!!"));
    }
    arr_ChPattern.SetSize(0);
    arr_XCoord.SetSize(0);
    arr_YCoord.SetSize(0);
    arr_ZCoord.SetSize(0);
    i_str_ChPattern = StrFillRight(i_str_ChPattern, Translate("0"), num_1mL_channels);
    {
      for(int_ChIndex = 0; int_ChIndex < num_1mL_channels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_Left = StrLeft(i_str_ChPattern, int_ChIndex);
        str_Value = StrRight(str_Left, 1);
        int_Value = StrIVal(str_Value);
        str_LabID = SeqGetLabwareId(i_seq_Positions);
        int_Length = StrGetLength(str_LabID);
        if (int_Length > 0)
        {
          LPQ::LABWARE_GetCurrentPosition(ML_STAR, i_seq_Positions, flt_XCoord, flt_YCoord, flt_ZCoord);
        }
        else
        {
          int_Value = 0;
          flt_XCoord = 0.0;
          flt_YCoord = 0.0;
          flt_ZCoord = 0.0;
        }
        SeqIncrement(i_seq_Positions, 1);
        arr_ChPattern.AddAsLast(int_Value);
        arr_XCoord.AddAsLast(flt_XCoord);
        arr_YCoord.AddAsLast(flt_YCoord);
        arr_ZCoord.AddAsLast(i_flt_ZHeight);
      }
    }
    str_ChPattern = Translate("");
    {
      for(int_ChIndex = 0; int_ChIndex < num_1mL_channels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChPattern = StrConcat2(str_ChPattern, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      STAR_CHANNEL_MOVEMENT_TOOLS::Move_Channels_To_Absolute_Position_1mL(ML_STAR, str_ChPattern, 245.0, arr_XCoord, arr_YCoord, arr_ZCoord);
    }
    else
    {
      VANTAGE_CHANNEL_MOVEMENT_TOOLS::Move_Channels_To_Absolute_Position_1mL(ML_STAR, str_ChPattern, 245.0, arr_XCoord, arr_YCoord, arr_ZCoord);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function MOVE_ChannelsToSequencePosition_5mL( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_Positions, variable i_flt_ZHeight ) void {
    private variable str_Left;
    private variable int_CutNum;
    private variable int_Length;
    private variable flt_ZCoord;
    private variable flt_YCoord;
    private variable strFunctionName;
    private variable flt_XCoord;
    private variable str_LabID;
    private variable strFunctionName_Cut;
    private variable num_1mL_channels;
    private variable int_Count;
    private variable int_Value;
    private variable str_Value;
    private variable int_ChIndex;
    private variable str_ChPattern;
    private variable arr_ChPattern[];
    private variable arr_ZCoord[];
    private variable arr_YCoord[];
    private variable arr_XCoord[];
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    num_1mL_channels = DevGetCfgValueWithKey(ML_STAR, 43);
    if (num_1mL_channels == 0)
    {
      TrcTrace(Translate("****************************  There are no 1 mL channels installed!"), Translate(""));
      ErrRaise(101, Translate("No 1 mL channels installed!!"));
    }
    arr_ChPattern.SetSize(0);
    arr_XCoord.SetSize(0);
    arr_YCoord.SetSize(0);
    arr_ZCoord.SetSize(0);
    i_str_ChPattern = StrFillRight(i_str_ChPattern, Translate("0"), num_1mL_channels);
    {
      for(int_ChIndex = 0; int_ChIndex < num_1mL_channels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_Left = StrLeft(i_str_ChPattern, int_ChIndex);
        str_Value = StrRight(str_Left, 1);
        int_Value = StrIVal(str_Value);
        str_LabID = SeqGetLabwareId(i_seq_Positions);
        int_Length = StrGetLength(str_LabID);
        if (int_Length > 0)
        {
          LPQ::LABWARE_GetCurrentPosition(ML_STAR, i_seq_Positions, flt_XCoord, flt_YCoord, flt_ZCoord);
        }
        else
        {
          int_Value = 0;
          flt_XCoord = 0.0;
          flt_YCoord = 0.0;
          flt_ZCoord = 0.0;
        }
        SeqIncrement(i_seq_Positions, 1);
        arr_ChPattern.AddAsLast(int_Value);
        arr_XCoord.AddAsLast(flt_XCoord);
        arr_YCoord.AddAsLast(flt_YCoord);
        arr_ZCoord.AddAsLast(i_flt_ZHeight);
      }
    }
    str_ChPattern = Translate("");
    {
      for(int_ChIndex = 0; int_ChIndex < num_1mL_channels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChPattern = StrConcat2(str_ChPattern, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      STAR_CHANNEL_MOVEMENT_TOOLS::Move_Channels_To_Absolute_Position_5mL(ML_STAR, str_ChPattern, 245.0, arr_XCoord, arr_YCoord, arr_ZCoord);
    }
    else
    {
      VANTAGE_CHANNEL_MOVEMENT_TOOLS::Move_Channels_To_Absolute_Position_5mL(ML_STAR, str_ChPattern, 245.0, arr_XCoord, arr_YCoord, arr_ZCoord);
    }
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function TRAVEL_LANES_MoveChannelsToYPosition( device & ML_STAR, sequence i_seq_TargetSequence, variable i_flt_XOffsetFromOrigin ) void {
    private variable int_CutNum;
    private variable flt_X_Origin;
    private variable int_Length;
    private variable flt_NotUsed;
    private variable strFunctionName;
    private variable str_LabID;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_PosID;
    private variable bool_SequenceValid;
    private variable flt_StartLocation;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(ML_STAR, i_seq_TargetSequence, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    HELPERLIBRARY::GetLabwareOrigin(ML_STAR, str_LabID, flt_X_Origin, flt_NotUsed, flt_NotUsed);
    flt_StartLocation = flt_X_Origin + i_flt_XOffsetFromOrigin;
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    TRAVEL_LANES::MoveChannelsToSequencePosition(ML_STAR, i_seq_TargetSequence);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function TRAVEL_LANES_MoveChannelsToYPosition_5mL( device & ML_STAR, sequence i_seq_TargetSequence, variable i_flt_XOffsetFromOrigin ) void {
    private variable flt_X_Origin;
    private variable int_CutNum;
    private variable flt_NotUsed;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable str_LabID;
    private variable int_Count;
    private variable str_PosID;
    private variable bool_SequenceValid;
    private variable flt_StartLocation;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_SequenceValid = _GetSequencePosition(ML_STAR, i_seq_TargetSequence, str_LabID, str_PosID);
    if (bool_SequenceValid == 0)
    {
      _FunctionError(strFunctionName, Translate("No more sequence positions!"));
    }
    HELPERLIBRARY::GetLabwareOrigin(ML_STAR, str_LabID, flt_X_Origin, flt_NotUsed, flt_NotUsed);
    flt_StartLocation = flt_X_Origin + i_flt_XOffsetFromOrigin;
    ML_STAR._55AA8CFA_FB6C_4691_8C8C_8D410E2123FD("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"); // XLMoveToPosition
    TRAVEL_LANES::MoveChannelsToSequencePosition_5mL(ML_STAR, i_seq_TargetSequence);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  private function Abstract(  ) void {
  }
} // library namespace
