#pragma once
#include "HSLStrLib.hsl"
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "HSLSeqLib.hsl"
#include "STAR Tools\\Resources\\SubMethods\\TIP_OFFSET_GLOBAL.hsl"
#include "HSLDevLib.hsl"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "HSLExtensions\\File.hsl"
#include "HSLExtensions\\Sequence.hsl"
#include "HSLDeckVisualize.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSL_MethodHelper.hsl"
#include "HSLUtilLib2.hsl"
#include "Alpha Numeric Conversion\\Alpha Numeric Conversion.hs_"
#include "STAR Tools\\Resources\\SubMethods\\FW_HelperLibrary.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace STAR_MPH96_TOOLS {
  private function ABSTRACT(  ) void ;
  function MOVE_MPH96ToBack( device & ML_STAR ) void ;
  function TIP_OFFSET_CleanUpTips_Column( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_str_TipCounter ) void ;
  function TIP_OFFSET_CleanUpTips_Column2( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_str_TipCounter ) void ;
  function TIP_OFFSET_CleanUpTips_Rows( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_str_TipCounter ) void ;
  function TIP_OFFSET_CleanUpTips_Rows2( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_str_TipCounter ) void ;
  function TIP_OFFSET_PickUpTips_Column( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_int_ColumnsNeeded, variable i_str_TipCounter, variable i_bln_UseLeftSide ) variable ;
  function TIP_OFFSET_PickUpTips_Rows( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_int_RowsNeeded, variable i_str_TipCounter, variable i_bool_UseTop ) variable ;
  function TOOL_ChangePickUpMode( device & ML_STAR, sequence i_seq_TipPositionToAdjust, variable i_int_PickUpMode ) void ;
  function TOOL_GetLiquidLevelHeight( device & ML_STAR, variable i_str_ReturnValue3FromTipPickUp, variable i_str_ReturnValue3FromPipetting, variable & o_flt_LiquidLevelHeight ) void ;
  function TOOL_GetTipPresence( device & ML_STAR, variable & o_bln_TipLoaded ) void ;
  function TOOL_PickUpNextMPH96Tips( device & ML_STAR, sequence & io_seq_SourceTips, variable i_str_TipCounter ) variable ;
  private function _AddRemainderTipsToCurrentSequence( device & Instrument, sequence & io_seq_TargetSequence, sequence i_seq_RemainderSequence, sequence i_seq_ReturnPositionSequence ) void ;
  private function _AppendRemainderTipsToCurrentSequence( device & Instrument, sequence & io_seq_TargetSequence, sequence i_seq_RemainderSequence, sequence i_seq_ReturnPositionSequence ) void ;
  private function _ConvertToFloat( variable & io_Value ) void ;
  private function _ConvertToInteger( variable & io_Value ) void ;
  private function _ConvertToString( variable & io_Value ) void ;
  private function _GetConsecutiveSequencePositions( device & ML_STAR, sequence i_seq_SourcePositions, variable i_int_TotalPositionsNeeded, variable i_bool_RightToLeft, sequence & o_seq_ConsecutivePositions ) void ;
  private function _GetConsecutiveSequencePositions2( device & ML_STAR, sequence i_seq_SourcePositions, variable i_int_TotalPositionsNeeded, variable i_bool_BottomToFront, sequence & o_seq_ConsecutivePositions ) void ;
  private function _GetFullSequenceCopy( device & Instrument, sequence i_seq_SequenceToCopy, sequence & o_seq_CopiedSequence ) void ;
  private function _GetNextTipPickUpPosition( sequence io_seq_Source, sequence & o_seq_TipPickUpPosition ) void ;
  private function _GetNextTipPickUpPosition_Partial( device & Instrument, sequence i_seq_Source, sequence & o_seq_TipPickUpPosition, variable i_int_TipsNeeded ) void ;
  private function _GetNextTipPickUpPosition_Partial2( device & Instrument, sequence i_seq_Source, sequence & o_seq_TipPickUpPosition, variable i_int_TipsNeeded ) void ;
  private function _InitializeLibrary(  ) void ;
  private function _LocalPickUpNextMPH96Tips( device & ML_STAR, sequence & io_seq_SourceTips, variable i_str_TipCounter ) variable ;
  private function _MoveTipsToOffset( device & ML_STAR ) void ;
  private function _PickUpTips( device & ML_STAR, variable i_int_TipsNeeded, variable i_bool_PickUpLeft, variable & o_str_ChPattern, variable & o_str_PickUpReturn ) void ;
  private function _PickUpTips2( device & ML_STAR, variable i_int_TipsNeeded, variable i_bool_PickUpTop, variable o_str_PickUpReturn ) void ;
  private function _RemoveSequencePositions( sequence & io_seq_SourceSequence, sequence i_seq_PositionsToRemove ) void ;
  private function _RemoveTruncatedSequencePositions( sequence & io_Sequence ) void ;
  private function _ReturnTipsToPickUp( device & ML_STAR, variable i_bool_PickUpLeft ) void ;
  private function _ReturnTipsToPickUp2( device & ML_STAR, variable i_bool_PickUpTop ) void ;
  private function _SetEmptyPositions( device & ML_STAR, sequence i_seq_SourceTips ) void ;
  private function _TipCheckMPH96( device & Instrument, sequence & io_seq_Tips, variable i_str_TipCounter ) void ;
  private function _UpdateTipSequence( sequence & io_SourceTipSequence ) void ;
  private function __GetSortFilePath( variable & o_str_SortFilePath ) void ;
  private function __SortSequence( device & Instrument, sequence & io_SequenceToSort, variable i_bool_SortRightToLeft ) void ;
  private function __SortSequence2( device & Instrument, sequence & io_SequenceToSort, variable i_bool_SortBottomToFront ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    LPQ::_InitLibrary();
    ANC::_InitLibrary();
    FW_HELPERLIBRARY::_InitLibrary();
  }
  function _ExitLibrary() {
    STAR_TIP_TOOLS::_ExitLibrary();
    LPQ::_ExitLibrary();
    ANC::_ExitLibrary();
    FW_HELPERLIBRARY::_ExitLibrary();
  }

  function TIP_OFFSET_PickUpTips_Column( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_int_ColumnsNeeded, variable i_str_TipCounter, variable i_bln_UseLeftSide ) variable {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable int_TipType;
    private variable int_TipsNeeded;
    private variable int_TipOffset_TipType;
    private variable int_PositionsSet;
    private variable str_TipLabID;
    private variable int_TotalEmpty;
    private variable int_TotalPositions;
    private variable i;
    private variable str_LabID;
    private variable str_PosID;
    private sequence seq_EjectSequence;
    private variable o_str_ChannelPattern;
    private variable ret_str_TipPickUp;
    private variable bln_ValueFound;
    private variable str_TipOffsetLabID;
    private variable int_TotalLabwareSet;
    private sequence seq_Temp;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    ret_str_TipPickUp = Translate("");
    _InitializeLibrary();
    _ConvertToInteger(i_bln_UseLeftSide);
    _ConvertToInteger(i_int_ColumnsNeeded);
    _ConvertToString(i_str_TipCounter);
    STAR_TIP_TOOLS::GetTipType(ML_STAR, io_seq_SourceTips, int_TipType);
    int_TipsNeeded = i_int_ColumnsNeeded * 8;
    if (i_int_ColumnsNeeded == 12)
    {
      ret_str_TipPickUp = _LocalPickUpNextMPH96Tips(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      return (ret_str_TipPickUp);
    }
    _RemoveTruncatedSequencePositions(io_seq_SourceTips);
    _GetFullSequenceCopy(ML_STAR, i_seq_TipOffset, seq_Temp);
    str_TipOffsetLabID = SeqGetLabwareId(seq_Temp);
    SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    int_TotalLabwareSet=TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.GetSize();
    if (int_TotalLabwareSet > 0)
    {
      bln_ValueFound = Util::Lookup(TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, str_TipOffsetLabID, TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX + 1;
      if (bln_ValueFound == BOOLEON::FALSE)
      {
        TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
        TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
        TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
        TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
        TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.AddAsLast(seq_Temp);
      }
      else
      {
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED=TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP=TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT=TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
      }
    }
    else
    {
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
      TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
      TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.AddAsLast(seq_Temp);
    }
    Util2::Debug::TraceArray_2(Translate("Labware               Count"), TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED);
    TRACE::TRACE02(Translate("Current Index:  "), TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
    TRACE::TRACE02(Translate("Current Labware:  "), str_TipOffsetLabID);
    TRACE::TRACE02(Translate("Current Tip Count  "), TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
    if (int_TipsNeeded < 8)
    {
      Trace("****************** Column request of ",i_int_ColumnsNeeded," is not achievable because it is less than 8 tips!");
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      return (ret_str_TipPickUp);
    }
    if (int_TipsNeeded > 96)
    {
      Trace("****************** Column request of ",i_int_ColumnsNeeded," is not achievable because it will exceed 96 tips!");
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      return (ret_str_TipPickUp);
    }
    if (i_int_ColumnsNeeded < 12)
    {
      {
        while (1 == 1)
        {
          STAR_TIP_TOOLS::GetTipType(ML_STAR, i_seq_TipOffset, int_TipOffset_TipType);
          if (int_TipType != int_TipOffset_TipType)
          {
            if (int_TipOffset_TipType == -1)
            {
              {
                while (1 == 1)
                {
                  MECC::TraceComment(Translate("===========================================\nCheck for partial rack of tips\n==========================================="));
                  _GetNextTipPickUpPosition_Partial(ML_STAR, io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH, int_TipsNeeded);
                  int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                  if (int_PositionsSet == 0)
                  {
                    MECC::TraceComment(Translate("===========================================\nCheck for full rack of tips\n==========================================="));
                    _GetNextTipPickUpPosition(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                    int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                    Trace("Full rack check loaded:  ",int_PositionsSet);
                  }
                  else
                  {
                    Trace("Partial rack check loaded:  ",int_PositionsSet);
                  }
                  if (int_PositionsSet == 0)
                  {
                    MECC::TraceComment(Translate("===========================================\nMore tips are needed\n==========================================="));
                    if(0){
                      STAR_TIP_TOOLS::TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
                    }
                    _TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
                  }
                  if (int_PositionsSet > 1)
                  {
                    break;
                  }
                }
              }
              str_TipLabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
              LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
              _UpdateTipSequence(io_seq_SourceTips);
              str_TipLabID = SeqGetLabwareId(i_seq_TipOffset);
              LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
              _MoveTipsToOffset(ML_STAR);
            }
            else
            {
              if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED > 0)
              {
                if(0){
                  _AddRemainderTipsToCurrentSequence(ML_STAR, io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
                }
                TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
                _GetNextTipPickUpPosition_Partial(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, seq_EjectSequence, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
                if (int_TotalEmpty == 0)
                {
                  int_TotalEmpty = SeqGetTotal(seq_EjectSequence);
                  _GetConsecutiveSequencePositions(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED, 1, seq_EjectSequence);
                  int_TotalEmpty = SeqGetTotal(seq_EjectSequence);
                  if (int_TotalEmpty > 0)
                  {
                    SeqCopySequence(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, seq_EjectSequence);
                  }
                }
                else
                {
                  SeqCopySequence(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, seq_EjectSequence);
                }
                TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP.SetCurrentPosition(1);
                __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 1);
                _ReturnTipsToPickUp(ML_STAR, i_bln_UseLeftSide);
              }
              {
                while (1 == 1)
                {
                  MECC::TraceComment(Translate("===========================================\nCheck for partial rack of tips\n==========================================="));
                  _GetNextTipPickUpPosition_Partial(ML_STAR, io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH, int_TipsNeeded);
                  int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                  if (int_PositionsSet == 0)
                  {
                    MECC::TraceComment(Translate("===========================================\nCheck for full rack of tips\n==========================================="));
                    _GetNextTipPickUpPosition(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                    int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                    Trace("Full rack check loaded:  ",int_PositionsSet);
                  }
                  else
                  {
                    Trace("Partial rack check loaded:  ",int_PositionsSet);
                  }
                  if (int_PositionsSet == 0)
                  {
                    MECC::TraceComment(Translate("===========================================\nMore tips are needed\n==========================================="));
                    if(0){
                      STAR_TIP_TOOLS::TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
                    }
                    _TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
                  }
                  if (int_PositionsSet > 1)
                  {
                    break;
                  }
                }
              }
              str_TipLabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
              LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
              _UpdateTipSequence(io_seq_SourceTips);
              str_TipLabID = SeqGetLabwareId(i_seq_TipOffset);
              LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
              _MoveTipsToOffset(ML_STAR);
            }
          }
          _SetEmptyPositions(ML_STAR, io_seq_SourceTips);
          if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED > 0)
          {
            if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED < int_TipsNeeded)
            {
              TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
              _GetNextTipPickUpPosition_Partial(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, seq_EjectSequence, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
              int_TotalEmpty = SeqGetTotal(seq_EjectSequence);
              if (int_TotalEmpty == 0)
              {
                _GetConsecutiveSequencePositions(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED, 1, seq_EjectSequence);
                int_TotalEmpty = SeqGetTotal(seq_EjectSequence);
                Trace("Total Empty:  ",int_TotalEmpty);
                if (int_TotalEmpty > 0)
                {
                  SeqCopySequence(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, seq_EjectSequence);
                }
              }
              else
              {
                SeqCopySequence(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, seq_EjectSequence);
              }
              __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 1);
              {
                for(i = 0; i < TIP_OFFSET_GLOBAL::INT::TIPS_LOADED;)
                {
                  i = i + 1;
                  TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP.SetCurrentPosition(i);
                  str_LabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
                  str_PosID = SeqGetPositionId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
                  SeqAdd(io_seq_SourceTips, str_LabID, str_PosID);
                }
              }
              TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP.SetCurrentPosition(1);
              io_seq_SourceTips.SetCurrentPosition(1);
              _ReturnTipsToPickUp(ML_STAR, i_bln_UseLeftSide);
              __SortSequence(ML_STAR, io_seq_SourceTips, 0);
              STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
              DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
            }
          }
          else
          {
            {
              while (1 == 1)
              {
                MECC::TraceComment(Translate("===========================================\nCheck for partial rack of tips\n==========================================="));
                _GetNextTipPickUpPosition_Partial(ML_STAR, io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH, int_TipsNeeded);
                int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                if (int_PositionsSet == 0)
                {
                  MECC::TraceComment(Translate("===========================================\nCheck for full rack of tips\n==========================================="));
                  _GetNextTipPickUpPosition(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                  int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                  Trace("Full rack check loaded:  ",int_PositionsSet);
                }
                else
                {
                  Trace("Partial rack check loaded:  ",int_PositionsSet);
                }
                if (int_PositionsSet == 0)
                {
                  MECC::TraceComment(Translate("===========================================\nMore tips are needed\n==========================================="));
                  if(0){
                    STAR_TIP_TOOLS::TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
                  }
                  _TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
                  DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
                }
                if (int_PositionsSet > 0)
                {
                  break;
                }
              }
            }
            str_TipLabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
            LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
            _UpdateTipSequence(io_seq_SourceTips);
            str_TipLabID = SeqGetLabwareId(i_seq_TipOffset);
            LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
            _MoveTipsToOffset(ML_STAR);
          }
          Trace("Tips loaded:  ",TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
          if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED > 0)
          {
            _PickUpTips(ML_STAR, int_TipsNeeded, i_bln_UseLeftSide, o_str_ChannelPattern, ret_str_TipPickUp);
            break;
          }
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("====================================================================\nPick up full rack of tips\n===================================================================="));
      {
        while (1 == 1)
        {
          _GetNextTipPickUpPosition(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
          int_TotalPositions = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
          if (int_TotalPositions != 96)
          {
            STAR_TIP_TOOLS::TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
          }
          else
          {
            break;
          }
        }
      }
      o_str_ChannelPattern = StrFillRight(o_str_ChannelPattern, Translate("1"), 96);
      _RemoveSequencePositions(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    }
    _RemoveTruncatedSequencePositions(io_seq_SourceTips);
    __SortSequence(ML_STAR, io_seq_SourceTips, 0);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
    TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.SetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
    TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.SetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    _RemoveTruncatedSequencePositions(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.SetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    return (ret_str_TipPickUp);
  }

  private function _ConvertToInteger( variable & io_Value ) void {
    io_Value = StrConcat2(io_Value, Translate(""));
    io_Value = StrIVal(io_Value);
  }

  private function _ConvertToString( variable & io_Value ) void {
    io_Value = StrConcat2(io_Value, Translate(""));
  }

  private function _ConvertToFloat( variable & io_Value ) void {
    io_Value = StrConcat2(io_Value, Translate(""));
    io_Value = StrFVal(io_Value);
  }

  private function _InitializeLibrary(  ) void {
    TIP_OFFSET_GLOBAL::INIT::InitializeVariables();
    if (TIP_OFFSET_GLOBAL::BOOL::LIBRARY_INITIALIZED == 0)
    {
      SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
      SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::TIP_REFRESH);
      SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
      SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
      SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS);
      TIP_OFFSET_GLOBAL::BOOL::LIBRARY_INITIALIZED = 1;
      TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.SetSize(0);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.SetSize(0);
      TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.SetSize(0);
      TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.SetSize(0);
    }
  }

  private function _SetEmptyPositions( device & ML_STAR, sequence i_seq_SourceTips ) void {
    private variable int_PositionFound;
    private variable i;
    private variable int_LoopNum;
    private variable str_LabID;
    private variable str_PosID;
    private sequence seq_Temp;
    SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS);
    SeqRemoveAll(seq_Temp);
    _GetFullSequenceCopy(ML_STAR, i_seq_SourceTips, seq_Temp);
    int_LoopNum = SeqGetTotal(seq_Temp);
    {
      for(i = 0; i < int_LoopNum;)
      {
        i = i + 1;
        seq_Temp.SetCurrentPosition(i);
        str_LabID = SeqGetLabwareId(seq_Temp);
        str_PosID = SeqGetPositionId(seq_Temp);
        int_PositionFound = SeqLookupPosition(i_seq_SourceTips, str_LabID, str_PosID, 1, 1);
        if (int_PositionFound == 0)
        {
          SeqAdd(TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, str_LabID, str_PosID);
        }
      }
    }
    TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS.SetCurrentPosition(1);
    __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, 0);
  }

  private function _GetFullSequenceCopy( device & Instrument, sequence i_seq_SequenceToCopy, sequence & o_seq_CopiedSequence ) void {
    { sequence __temp; o_seq_CopiedSequence = __temp; }
    SeqRemoveAll(o_seq_CopiedSequence);
    {
         Instrument.CopyResetSequence(i_seq_SequenceToCopy.GetName(),o_seq_CopiedSequence);
    }
  }

  private function __SortSequence( device & Instrument, sequence & io_SequenceToSort, variable i_bool_SortRightToLeft ) void {
    private variable flt_X_Coord;
    private variable flt_NotUsed;
    private variable flt_Y_Coord;
    private variable i;
    private variable str_LabID;
    private variable str_Sort;
    private variable bool_FileExists;
    private variable str_PosID;
    private variable str_TempSortFile;
    private variable int_TotalPositions;
    private file SortFile;
    __GetSortFilePath(str_TempSortFile);
    bool_FileExists = HSLExtensions::File::Exists(str_TempSortFile);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(str_TempSortFile);
    }
    _RemoveTruncatedSequencePositions(io_SequenceToSort);
    int_TotalPositions = SeqGetTotal(io_SequenceToSort);
    SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
    SortFile.AddField("POS_ID", str_PosID, hslString, 255);
    SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
    SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
    if( 0 == SortFile.Open(str_TempSortFile + " " + "SORT_FILE", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TempSortFile, "HxMetEdCompCmd");
    }
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        io_SequenceToSort.SetCurrentPosition(i);
        str_LabID = SeqGetLabwareId(io_SequenceToSort);
        str_PosID = SeqGetPositionId(io_SequenceToSort);
        DevGetLabwarePositionEx(Instrument, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_NotUsed, flt_NotUsed);
        if( 0 == SortFile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != SortFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    SortFile.RemoveFields();
    if (i_bool_SortRightToLeft == 1)
    {
      str_Sort = StrConcat2(Translate("SELECT * FROM SORT_FILE ORDER BY LAB_ID ASC, X_COORD DESC, Y_COORD DESC"), Translate(""));
    }
    else
    {
      str_Sort = StrConcat2(Translate("SELECT * FROM SORT_FILE ORDER BY LAB_ID ASC, X_COORD ASC, Y_COORD DESC"), Translate(""));
    }
    SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
    SortFile.AddField("POS_ID", str_PosID, hslString, 255);
    SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
    SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
    if( 0 == SortFile.Open(str_TempSortFile + " " + "SORT_FILE", hslRead, str_Sort) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TempSortFile, "HxMetEdCompCmd");
    }
    SeqRemoveAll(io_SequenceToSort);
    {
      while (
         (SortFile.Eof() == 0)
      )
      {
        if( 0 == SortFile.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(io_SequenceToSort, str_LabID, str_PosID);
      }
    }
    if( 0 != SortFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    SortFile.RemoveFields();
    io_SequenceToSort.SetCurrentPosition(1);
  }

  private function __GetSortFilePath( variable & o_str_SortFilePath ) void {
    private variable str_FilePath;
    private variable str_FileName;
    o_str_SortFilePath = 0;
    o_str_SortFilePath = Translate("");
    str_FilePath = Translate("");
    str_FilePath = GetFileName();
    str_FileName = HSLExtensions::File::GetFileName(str_FilePath);
    StrReplace(str_FilePath, str_FileName, Translate(""));
    str_FilePath = StrConcat8(str_FilePath, Translate(""), Translate("Resources"), Translate("\\"), Translate("TEMP_SORT_FILE"), Translate(".xls"), Translate(""), Translate(""));
    StrReplace(str_FilePath, Translate("\\"), Translate("\\\\"));
    o_str_SortFilePath = str_FilePath;
    if(0){
      Trace("Sort File Path:  ",o_str_SortFilePath);
    }
  }

  private function _RemoveTruncatedSequencePositions( sequence & io_Sequence ) void {
    private variable int_CurrentPosition;
    private variable i;
    private variable int_TotalSequencePositions;
    private variable str_LabID;
    private variable str_PosID;
    private sequence seq_AdjustedSequence;
    int_CurrentPosition = io_Sequence.GetCurrentPosition();
    SeqRemoveAll(seq_AdjustedSequence);
    SeqCopySequence(seq_AdjustedSequence, io_Sequence);
    int_TotalSequencePositions = SeqGetTotal(seq_AdjustedSequence);
    SeqRemoveAll(io_Sequence);
    seq_AdjustedSequence.SetCurrentPosition(int_CurrentPosition);
    {
      for(i = 0; i < int_TotalSequencePositions;)
      {
        i = i + 1;
        str_LabID = SeqGetLabwareId(seq_AdjustedSequence);
        str_PosID = SeqGetPositionId(seq_AdjustedSequence);
        SeqIncrement(seq_AdjustedSequence, 1);
        if (str_LabID != "")
        {
          if (str_PosID != "")
          {
            SeqAdd(io_Sequence, str_LabID, str_PosID);
          }
        }
      }
    }
    io_Sequence.SetCurrentPosition(1);
  }

  private function _GetNextTipPickUpPosition( sequence io_seq_Source, sequence & o_seq_TipPickUpPosition ) void {
    private variable i;
    private variable str_LabID_ToRemove;
    private variable str_LabID;
    private variable int_TotalTipLabware;
    private variable a;
    private variable int_PositionCount;
    private variable str_PosID;
    private variable arr_LabIDs[];
    { sequence __temp; o_seq_TipPickUpPosition = __temp; }
    SeqRemoveAll(o_seq_TipPickUpPosition);
    _RemoveTruncatedSequencePositions(io_seq_Source);
    SeqGetLabwareIds(io_seq_Source, arr_LabIDs);
    int_TotalTipLabware=arr_LabIDs.GetSize();
    str_LabID_ToRemove = Translate("");
    {
      for(i = 0; i < int_TotalTipLabware;)
      {
        i = i + 1;
        str_LabID=arr_LabIDs.GetAt(i-1);
        int_PositionCount = SeqGetPositionCountForCurrLabware(io_seq_Source);
        if (int_PositionCount == 96)
        {
          str_LabID_ToRemove = str_LabID;
          {
            for(a = 0; a < 96;)
            {
              a = a + 1;
              str_PosID = SeqGetPositionId(io_seq_Source);
              SeqAdd(o_seq_TipPickUpPosition, str_LabID, str_PosID);
              SeqIncrement(io_seq_Source, 1);
            }
          }
          o_seq_TipPickUpPosition.SetCurrentPosition(1);
          break;
        }
        else
        {
          SeqIncrement(io_seq_Source, int_PositionCount);
        }
      }
    }
  }

  private function _GetNextTipPickUpPosition_Partial( device & Instrument, sequence i_seq_Source, sequence & o_seq_TipPickUpPosition, variable i_int_TipsNeeded ) void {
    private variable int_CurrentPosition;
    private variable int_Column;
    private variable int_Remainder;
    private variable bool_FullColumns;
    private variable i;
    private variable int_RowCount;
    private variable str_CurrentColumn;
    private variable str_LabID_ToRemove;
    private variable str_LabID;
    private variable int_Position;
    private variable int_TotalTipLabware;
    private variable a;
    private variable str_CurrentRow;
    private variable int_PositionCount;
    private variable str_PosID;
    private variable int_TotalPositions;
    private variable str_Column;
    private sequence seq_Temp;
    private sequence seq_Temp2;
    private variable arr_LabIDs[];
    private variable int_Index;
    { sequence __temp; o_seq_TipPickUpPosition = __temp; }
    SeqRemoveAll(o_seq_TipPickUpPosition);
    _RemoveTruncatedSequencePositions(i_seq_Source);
    SeqGetLabwareIds(i_seq_Source, arr_LabIDs);
    int_TotalTipLabware=arr_LabIDs.GetSize();
    str_LabID_ToRemove = Translate("");
    {
      for(i = 0; i < int_TotalTipLabware;)
      {
        i = i + 1;
        str_LabID=arr_LabIDs.GetAt(i-1);
        int_PositionCount = SeqGetPositionCountForCurrLabware(i_seq_Source);
        int_CurrentPosition = i_seq_Source.GetCurrentPosition();
        if(0){
          Trace("Source sequence position count:  ",int_PositionCount,"  Current Position:  ",int_CurrentPosition,"  LabID:  ",str_LabID);
        }
        if (int_PositionCount >= i_int_TipsNeeded)
        {
          str_LabID_ToRemove = str_LabID;
          {
            for(a = 0; a < int_PositionCount;)
            {
              a = a + 1;
              str_PosID = SeqGetPositionId(i_seq_Source);
              SeqAdd(o_seq_TipPickUpPosition, str_LabID, str_PosID);
              SeqIncrement(i_seq_Source, 1);
            }
          }
          o_seq_TipPickUpPosition.SetCurrentPosition(1);
          __SortSequence(Instrument, o_seq_TipPickUpPosition, 0);
          int_TotalPositions = SeqGetTotal(o_seq_TipPickUpPosition);
          str_CurrentRow = Translate("");
          str_CurrentColumn = Translate("");
          SeqRemoveAll(seq_Temp);
          SeqRemoveAll(seq_Temp2);
          int_RowCount = 0;
          str_LabID = SeqGetLabwareId(o_seq_TipPickUpPosition);
          bool_FullColumns = 1;
          {
            for(int_Index = 0; int_Index < int_TotalPositions;)
            {
              int_Index = int_Index + 1;
              o_seq_TipPickUpPosition.SetCurrentPosition(int_Index);
              str_PosID = SeqGetPositionId(o_seq_TipPickUpPosition);
              int_Position = StrIVal(str_PosID);
              int_Column = int_Position / 8;
              int_Remainder = int_Position % 8;
              if (int_Remainder > 0)
              {
                int_Column = int_Column + 1;
              }
              str_Column = StrConcat2(int_Column, Translate(""));
              if (str_Column != str_CurrentColumn)
              {
                if (int_RowCount > 0)
                {
                  if (int_RowCount == 8)
                  {
                  }
                  else
                  {
                    bool_FullColumns = 0;
                    SeqRemoveAll(o_seq_TipPickUpPosition);
                    break;
                  }
                }
                int_RowCount = 0;
                str_CurrentColumn = str_Column;
                SeqAdd(seq_Temp, str_LabID, str_PosID);
                int_RowCount = int_RowCount + 1;
              }
              else
              {
                SeqAdd(seq_Temp, str_LabID, str_PosID);
                int_RowCount = int_RowCount + 1;
              }
              if(0){
                Trace("Row Count:  ",int_RowCount,"  Current Column:  ",str_Column,"  Target Column:  ",str_CurrentColumn);
              }
              if (int_Index == int_TotalPositions)
              {
                if (int_RowCount == 8)
                {
                }
                else
                {
                  bool_FullColumns = 0;
                  SeqRemoveAll(o_seq_TipPickUpPosition);
                  break;
                }
              }
            }
          }
          if(0){
            Trace("Full Column:  ",bool_FullColumns);
          }
          if (bool_FullColumns == 1)
          {
            seq_Temp.SetCurrentPosition(1);
            SeqCopySequence(o_seq_TipPickUpPosition, seq_Temp);
            break;
          }
        }
        else
        {
          SeqIncrement(i_seq_Source, int_PositionCount);
        }
      }
    }
  }

  private function _UpdateTipSequence( sequence & io_SourceTipSequence ) void {
    private variable i;
    private variable str_UsedLabware;
    private variable str_LabID;
    private variable int_TotalPosition;
    private variable str_PosID;
    private sequence seq_Temp;
    str_UsedLabware = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
    _RemoveTruncatedSequencePositions(io_SourceTipSequence);
    SeqCopySequence(seq_Temp, io_SourceTipSequence);
    int_TotalPosition = SeqGetTotal(seq_Temp);
    SeqRemoveAll(io_SourceTipSequence);
    {
      for(i = 0; i < int_TotalPosition;)
      {
        i = i + 1;
        seq_Temp.SetCurrentPosition(i);
        str_LabID = SeqGetLabwareId(seq_Temp);
        str_PosID = SeqGetPositionId(seq_Temp);
        if (str_LabID != str_UsedLabware)
        {
          SeqAdd(io_SourceTipSequence, str_LabID, str_PosID);
        }
      }
    }
    io_SourceTipSequence.SetCurrentPosition(1);
  }

  private function _MoveTipsToOffset( device & ML_STAR ) void {
    private variable flt_NewContainerBaseOffset;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable flt_SourceContainerBaseOffset;
    private variable str_NewContainer;
    private variable strFunctionName_Cut;
    private variable str_ContainerFile;
    private variable str_TipOffsetLabID;
    private variable int_Count;
    private variable int_TipType;
    private variable str_Well;
    private variable int_Well;
    private variable str_TipSourceLabID;
    private variable int_TotalOnOffset;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("*********************************");
    Trace(strFunctionName_Cut," - START");
    TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP.SetCurrentPosition(1);
    TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP.SetCount(96);
    TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT.SetCurrentPosition(1);
    TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT.SetCount(96);
    STAR_TIP_TOOLS::GetTipType(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP, int_TipType);
    LPQ::LABWARE_GetContainerBaseOffset(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP, flt_SourceContainerBaseOffset);
    flt_NewContainerBaseOffset = flt_SourceContainerBaseOffset + TIP_OFFSET_GLOBAL::FLT::CONTAINER_OFFSET;
    LPQ::CONT_GetConfigFile(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP, str_ContainerFile);
    str_NewContainer = HSLExtensions::File::GetFileNameWithoutExtension(str_ContainerFile);
    str_TipOffsetLabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, str_TipOffsetLabID, Translate("MlStarTipRack"), int_TipType);
    LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, str_TipOffsetLabID, Translate("MlStarCore96TipRack"), int_TipType);
    Trace("Tip Offset LabID:  ",str_TipOffsetLabID);
    Trace("Tip Container File:  ",str_NewContainer);
    Trace("Tip Container Base Offset:  ",flt_NewContainerBaseOffset);
    Trace("Tip Type:  ",int_TipType);
    if(0){
      {
        for(int_Well = 0; int_Well < 96;)
        {
          int_Well = int_Well + 1;
          TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT.SetCurrentPosition(int_Well);
          str_Well = SeqGetPositionId(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
          DevAddContainerToRack(ML_STAR, str_TipOffsetLabID, str_Well, str_ContainerFile, 0.0, 0.0, flt_NewContainerBaseOffset);
        }
      }
    }
    TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT.SetCurrentPosition(1);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    SeqCopySequence(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
    int_TotalOnOffset = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
    str_TipOffsetLabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    str_TipSourceLabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
    SeqCopySequence(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
    TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT = HSLExtensions::Sequence::ReplaceLabwareIdentifier(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, str_TipSourceLabID, str_TipOffsetLabID);
    TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = int_TotalOnOffset;
    DeckVisualize::UpdateUsedPositions(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, 0, Translate("Highlight the tips on offset"));
    Trace(strFunctionName_Cut," - FINISH");
    Trace("*********************************");
  }

  private function _ReturnTipsToPickUp( device & ML_STAR, variable i_bool_PickUpLeft ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_ChPattern;
    private variable int_TotalLabwareSet;
    private variable bln_ValueFound;
    private variable str_TipOffsetLabID;
    private sequence seq_Temp;
    private variable int_Index;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("*********************************");
    Trace(strFunctionName_Cut," - START");
    str_ChPattern = Translate("");
    str_ChPattern = StrFillLeft(str_ChPattern, Translate("1"), TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
    if (i_bool_PickUpLeft == 1)
    {
      str_ChPattern = StrFillRight(str_ChPattern, Translate("0"), 96);
      __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, 1);
      __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 1);
    }
    else
    {
      str_ChPattern = StrFillLeft(str_ChPattern, Translate("0"), 96);
      __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, 0);
      __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 1);
    }
    Trace("Channel Pattern:  ",str_ChPattern);
    if(0){
      LPQ::ADJUST_SetRelativePosition(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 0.0, 0.0, 2.0, 0.0);
    }
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    if(0){
      LPQ::ADJUST_SetRelativePosition(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 0.0, 0.0, -2.0, 0.0);
    }
    TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
    int_TotalLabwareSet=TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.GetSize();
    str_TipOffsetLabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    if (int_TotalLabwareSet > 0)
    {
      bln_ValueFound = Util::Lookup(TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, str_TipOffsetLabID, int_Index);
      int_Index = int_Index + 1;
      if (bln_ValueFound == BOOLEON::TRUE)
      {
        TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.SetAt(int_Index-1, str_TipOffsetLabID);
        TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.SetAt(int_Index-1, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
        TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.SetAt(int_Index-1, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      }
    }
    else
    {
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
      TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.AddAsLast(seq_Temp);
    }
    Trace(strFunctionName_Cut," - FINISH");
    Trace("*********************************");
  }

  private function _AppendRemainderTipsToCurrentSequence( device & Instrument, sequence & io_seq_TargetSequence, sequence i_seq_RemainderSequence, sequence i_seq_ReturnPositionSequence ) void {
    private variable i;
    private variable str_TargetLabID;
    private variable str_LabID;
    private variable str_PosID;
    private variable int_TotalInSequence;
    _RemoveTruncatedSequencePositions(i_seq_RemainderSequence);
    _RemoveTruncatedSequencePositions(io_seq_TargetSequence);
    str_TargetLabID = SeqGetLabwareId(i_seq_ReturnPositionSequence);
    int_TotalInSequence = SeqGetTotal(i_seq_RemainderSequence);
    {
      for(i = 0; i < int_TotalInSequence;)
      {
        i = i + 1;
        i_seq_ReturnPositionSequence.SetCurrentPosition(i);
        str_LabID = SeqGetLabwareId(i_seq_ReturnPositionSequence);
        str_PosID = SeqGetPositionId(i_seq_ReturnPositionSequence);
        SeqAdd(io_seq_TargetSequence, str_LabID, str_PosID);
      }
    }
    io_seq_TargetSequence.SetCurrentPosition(1);
    __SortSequence(Instrument, io_seq_TargetSequence, 1);
  }

  private function _AddRemainderTipsToCurrentSequence( device & Instrument, sequence & io_seq_TargetSequence, sequence i_seq_RemainderSequence, sequence i_seq_ReturnPositionSequence ) void {
    private variable i;
    private variable str_TargetLabID;
    private variable str_PosID;
    private variable int_TotalInSequence;
    _RemoveTruncatedSequencePositions(i_seq_RemainderSequence);
    _RemoveTruncatedSequencePositions(i_seq_ReturnPositionSequence);
    _RemoveTruncatedSequencePositions(io_seq_TargetSequence);
    str_TargetLabID = SeqGetLabwareId(i_seq_ReturnPositionSequence);
    int_TotalInSequence = SeqGetTotal(i_seq_RemainderSequence);
    {
      for(i = 0; i < int_TotalInSequence;)
      {
        i = i + 1;
        i_seq_RemainderSequence.SetCurrentPosition(i);
        str_PosID = SeqGetPositionId(i_seq_RemainderSequence);
        Trace("Lab ID:  ",str_TargetLabID,"  Pos ID:  ",str_PosID);
        SeqAdd(io_seq_TargetSequence, str_TargetLabID, str_PosID);
      }
    }
    io_seq_TargetSequence.SetCurrentPosition(1);
    __SortSequence(Instrument, io_seq_TargetSequence, 1);
  }

  private function _PickUpTips( device & ML_STAR, variable i_int_TipsNeeded, variable i_bool_PickUpLeft, variable & o_str_ChPattern, variable & o_str_PickUpReturn ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_ChPattern;
    o_str_ChPattern = 0;
    o_str_PickUpReturn = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("*********************************");
    Trace(strFunctionName_Cut," - START");
    str_ChPattern = Translate("");
    o_str_PickUpReturn = Translate("");
    str_ChPattern = StrFillLeft(str_ChPattern, Translate("1"), i_int_TipsNeeded);
    if (i_bool_PickUpLeft == 1)
    {
      str_ChPattern = StrFillRight(str_ChPattern, Translate("0"), 96);
    }
    else
    {
      str_ChPattern = StrFillLeft(str_ChPattern, Translate("0"), 96);
    }
    Trace("Channel Pattern:  ",str_ChPattern);
    __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, i_bool_PickUpLeft);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      	o_str_PickUpReturn = arrRetValues[2];
    }
    SeqIncrement(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, i_int_TipsNeeded);
    _RemoveTruncatedSequencePositions(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    o_str_ChPattern = str_ChPattern;
    Trace(strFunctionName_Cut," - FINISH");
    Trace("*********************************");
  }

  private function _RemoveSequencePositions( sequence & io_seq_SourceSequence, sequence i_seq_PositionsToRemove ) void {
    private sequence seq_Temp;
    private variable int_TotalPositions;
    private variable i;
    private variable str_LabID;
    private variable str_PosID;
    private variable int_PositionFound;
    _RemoveTruncatedSequencePositions(io_seq_SourceSequence);
    int_TotalPositions = SeqGetTotal(io_seq_SourceSequence);
    SeqCopySequence(seq_Temp, io_seq_SourceSequence);
    SeqRemoveAll(io_seq_SourceSequence);
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        str_LabID = SeqGetLabwareId(seq_Temp);
        str_PosID = SeqGetPositionId(seq_Temp);
        SeqIncrement(seq_Temp, 1);
        int_PositionFound = SeqLookupPosition(i_seq_PositionsToRemove, str_LabID, str_PosID, 1, 1);
        if (int_PositionFound == 0)
        {
          SeqAdd(io_seq_SourceSequence, str_LabID, str_PosID);
        }
      }
    }
    io_seq_SourceSequence.SetCurrentPosition(1);
  }

  function TIP_OFFSET_CleanUpTips_Column( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_str_TipCounter ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_TipOffsetLabID;
    private sequence seq_EjectSequence;
    private variable i;
    private variable str_LabID;
    private variable str_PosID;
    private variable int_TotalLabwareSet;
    private variable bln_ValueFound;
    private sequence seq_Temp;
    private variable int_TotalEmpty;
    private sequence seq_EmptyPosition;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    _GetFullSequenceCopy(ML_STAR, i_seq_TipOffset, seq_Temp);
    str_TipOffsetLabID = SeqGetLabwareId(seq_Temp);
    SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    int_TotalLabwareSet=TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.GetSize();
    if (int_TotalLabwareSet > 0)
    {
      bln_ValueFound = Util::Lookup(TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, str_TipOffsetLabID, TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX + 1;
      if (bln_ValueFound == BOOLEON::FALSE)
      {
        TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
        TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
        TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
        TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      }
      else
      {
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED=TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP=TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT=TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
      }
    }
    else
    {
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
      TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
      TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.AddAsLast(seq_Temp);
    }
    Util2::Debug::TraceArray_2(Translate("Labware               Count"), TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED);
    TRACE::TRACE02(Translate("Current Index:  "), TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
    TRACE::TRACE02(Translate("Current Labware:  "), str_TipOffsetLabID);
    TRACE::TRACE02(Translate("Current Tip Count  "), TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
    if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED > 0)
    {
      _InitializeLibrary();
      _ConvertToString(i_str_TipCounter);
      _RemoveTruncatedSequencePositions(io_seq_SourceTips);
      _SetEmptyPositions(ML_STAR, io_seq_SourceTips);
      TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
      if(0){
        _GetConsecutiveSequencePositions(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED, 1, seq_EjectSequence);
      }
      _GetNextTipPickUpPosition_Partial(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, seq_EmptyPosition, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      int_TotalEmpty = SeqGetTotal(seq_EmptyPosition);
      if (int_TotalEmpty > 0)
      {
        SeqCopySequence(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, seq_EmptyPosition);
      }
      __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 1);
      {
        for(i = 0; i < TIP_OFFSET_GLOBAL::INT::TIPS_LOADED;)
        {
          i = i + 1;
          TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP.SetCurrentPosition(i);
          str_LabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
          str_PosID = SeqGetPositionId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
          SeqAdd(io_seq_SourceTips, str_LabID, str_PosID);
        }
      }
      TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP.SetCurrentPosition(1);
      io_seq_SourceTips.SetCurrentPosition(1);
      __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 1);
      _ReturnTipsToPickUp(ML_STAR, BOOLEON::TRUE);
      str_TipOffsetLabID = SeqGetLabwareId(i_seq_TipOffset);
      LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, str_TipOffsetLabID, Translate("MlStarTipRack"), -1);
      LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, str_TipOffsetLabID, Translate("MlStarCore96TipRack"), -1);
      _RemoveTruncatedSequencePositions(io_seq_SourceTips);
      __SortSequence(ML_STAR, io_seq_SourceTips, 0);
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.SetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
    }
    else
    {
      MECC::TraceComment(Translate("====================================================================\nNo tips to clean up\n===================================================================="));
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  private function _GetConsecutiveSequencePositions( device & ML_STAR, sequence i_seq_SourcePositions, variable i_int_TotalPositionsNeeded, variable i_bool_RightToLeft, sequence & o_seq_ConsecutivePositions ) void {
    private variable int_TotalPositions;
    private variable i;
    private variable str_CurrentLabID;
    private sequence seq_FullSequence;
    private variable str_CurrentPosID;
    private variable int_CurrentColumn;
    private variable int_Position;
    private variable int_Column;
    private variable int_Remainder;
    private variable int_ColumnCheck;
    private variable int_RowCount;
    private variable int_PositionsAdded;
    private variable str_LabID;
    SeqRemoveAll(o_seq_ConsecutivePositions);
    __SortSequence(ML_STAR, seq_FullSequence, i_bool_RightToLeft);
    int_TotalPositions = SeqGetTotal(i_seq_SourcePositions);
    __SortSequence(ML_STAR, i_seq_SourcePositions, i_bool_RightToLeft);
    int_CurrentColumn = 0;
    int_RowCount = 0;
    int_PositionsAdded = 0;
    str_LabID = Translate("");
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        i_seq_SourcePositions.SetCurrentPosition(i);
        str_CurrentLabID = SeqGetLabwareId(i_seq_SourcePositions);
        str_CurrentPosID = SeqGetPositionId(i_seq_SourcePositions);
        if(0){
          Trace("Current Lab:  ",str_CurrentLabID,"  Current Pos ID:  ",str_CurrentPosID,"  Current Column:  ",int_CurrentColumn,"  Column:  ",int_Column);
        }
        int_Position = StrIVal(str_CurrentPosID);
        int_Column = int_Position / 8;
        int_Remainder = int_Position % 8;
        if (int_Remainder > 0)
        {
          int_Column = int_Column + 1;
        }
        if (str_CurrentLabID != str_LabID)
        {
          SeqRemoveAll(o_seq_ConsecutivePositions);
          int_RowCount = 0;
          int_CurrentColumn = int_Column;
          int_PositionsAdded = 0;
          str_LabID = str_CurrentLabID;
        }
        if (int_Column != int_CurrentColumn)
        {
          if (i_bool_RightToLeft == 1)
          {
            int_ColumnCheck = int_CurrentColumn - int_Column;
          }
          else
          {
            int_ColumnCheck = int_Column - int_CurrentColumn;
          }
          if(0){
            Trace("Column Check:  ",int_ColumnCheck);
          }
          if (int_RowCount != 8)
          {
            SeqRemoveAll(o_seq_ConsecutivePositions);
            int_RowCount = 0;
            int_CurrentColumn = int_Column;
            int_PositionsAdded = 0;
          }
          else
          {
            if (int_ColumnCheck != 1)
            {
              SeqRemoveAll(o_seq_ConsecutivePositions);
              int_RowCount = 0;
              int_CurrentColumn = int_Column;
              int_PositionsAdded = 0;
            }
            else
            {
              int_RowCount = 0;
              if (i_bool_RightToLeft == 1)
              {
                int_CurrentColumn = int_CurrentColumn - 1;
              }
              else
              {
                int_CurrentColumn = int_CurrentColumn + 1;
              }
            }
          }
        }
        int_RowCount = int_RowCount + 1;
        int_PositionsAdded = int_PositionsAdded + 1;
        SeqAdd(o_seq_ConsecutivePositions, str_CurrentLabID, str_CurrentPosID);
        if(0){
          Trace("Current Row count:  ",int_RowCount,"  Positions added:  ",int_PositionsAdded);
        }
        if (int_PositionsAdded == i_int_TotalPositionsNeeded)
        {
          break;
        }
      }
    }
    o_seq_ConsecutivePositions.SetCurrentPosition(1);
    int_TotalPositions = SeqGetTotal(o_seq_ConsecutivePositions);
    if (int_TotalPositions < i_int_TotalPositionsNeeded)
    {
      SeqRemoveAll(o_seq_ConsecutivePositions);
    }
  }

  private function __SortSequence2( device & Instrument, sequence & io_SequenceToSort, variable i_bool_SortBottomToFront ) void {
    private variable flt_X_Coord;
    private variable flt_NotUsed;
    private variable flt_Y_Coord;
    private variable i;
    private variable str_LabID;
    private variable str_Sort;
    private variable bool_FileExists;
    private variable str_PosID;
    private variable str_TempSortFile;
    private variable int_TotalPositions;
    private file SortFile;
    __GetSortFilePath(str_TempSortFile);
    bool_FileExists = HSLExtensions::File::Exists(str_TempSortFile);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(str_TempSortFile);
    }
    _RemoveTruncatedSequencePositions(io_SequenceToSort);
    int_TotalPositions = SeqGetTotal(io_SequenceToSort);
    SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
    SortFile.AddField("POS_ID", str_PosID, hslString, 255);
    SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
    SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
    if( 0 == SortFile.Open(str_TempSortFile + " " + "SORT_FILE", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TempSortFile, "HxMetEdCompCmd");
    }
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        io_SequenceToSort.SetCurrentPosition(i);
        str_LabID = SeqGetLabwareId(io_SequenceToSort);
        str_PosID = SeqGetPositionId(io_SequenceToSort);
        DevGetLabwarePositionEx(Instrument, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_NotUsed, flt_NotUsed);
        if( 0 == SortFile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != SortFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    SortFile.RemoveFields();
    if (i_bool_SortBottomToFront == 1)
    {
      str_Sort = StrConcat2(Translate("SELECT * FROM SORT_FILE ORDER BY LAB_ID ASC, Y_COORD ASC, X_COORD ASC"), Translate(""));
    }
    else
    {
      str_Sort = StrConcat2(Translate("SELECT * FROM SORT_FILE ORDER BY LAB_ID ASC, Y_COORD DESC, X_COORD ASC"), Translate(""));
    }
    SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
    SortFile.AddField("POS_ID", str_PosID, hslString, 255);
    SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
    SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
    if( 0 == SortFile.Open(str_TempSortFile + " " + "SORT_FILE", hslRead, str_Sort) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TempSortFile, "HxMetEdCompCmd");
    }
    SeqRemoveAll(io_SequenceToSort);
    {
      while (
         (SortFile.Eof() == 0)
      )
      {
        if( 0 == SortFile.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(io_SequenceToSort, str_LabID, str_PosID);
      }
    }
    if( 0 != SortFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    SortFile.RemoveFields();
    io_SequenceToSort.SetCurrentPosition(1);
  }

  private function _ReturnTipsToPickUp2( device & ML_STAR, variable i_bool_PickUpTop ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable i;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_ChPatternTemp;
    private variable int_TotalRows;
    private variable str_ChPattern;
    private variable int_TotalLabwareSet;
    private variable bln_ValueFound;
    private variable str_TipOffsetLabID;
    private sequence seq_Temp;
    private variable int_Index;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("*********************************");
    Trace(strFunctionName_Cut," - START");
    str_ChPattern = Translate("");
    str_ChPatternTemp = Translate("");
    int_TotalRows = TIP_OFFSET_GLOBAL::INT::TIPS_LOADED / 12;
    str_ChPatternTemp = StrFillLeft(str_ChPatternTemp, Translate("1"), int_TotalRows);
    if (i_bool_PickUpTop == 1)
    {
      str_ChPatternTemp = StrFillRight(str_ChPatternTemp, Translate("0"), 8);
    }
    else
    {
      str_ChPatternTemp = StrFillLeft(str_ChPatternTemp, Translate("0"), 8);
    }
    {
      for(i = 0; i < 12;)
      {
        i = i + 1;
        str_ChPattern = StrConcat2(str_ChPattern, str_ChPatternTemp);
      }
    }
    Trace("Channel Pattern:  ",str_ChPattern);
    if (i_bool_PickUpTop == 1)
    {
      __SortSequence2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, 1);
      __SortSequence2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 0);
    }
    else
    {
      __SortSequence2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, 0);
      __SortSequence2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 1);
    }
    if(0){
      LPQ::ADJUST_SetRelativePosition(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 0.0, 0.0, 2.0, 0.0);
    }
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    if(0){
      LPQ::ADJUST_SetRelativePosition(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 0.0, 0.0, -2.0, 0.0);
    }
    TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
    int_TotalLabwareSet=TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.GetSize();
    str_TipOffsetLabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    if (int_TotalLabwareSet > 0)
    {
      bln_ValueFound = Util::Lookup(TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, str_TipOffsetLabID, int_Index);
      int_Index = int_Index + 1;
      if (bln_ValueFound == BOOLEON::TRUE)
      {
        TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.SetAt(int_Index-1, str_TipOffsetLabID);
        TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.SetAt(int_Index-1, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
        TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.SetAt(int_Index-1, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      }
    }
    else
    {
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
      TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.AddAsLast(seq_Temp);
    }
    Trace(strFunctionName_Cut," - FINISH");
    Trace("*********************************");
  }

  private function _PickUpTips2( device & ML_STAR, variable i_int_TipsNeeded, variable i_bool_PickUpTop, variable o_str_PickUpReturn ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable i;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_ChPatternTemp;
    private variable int_TotalRows;
    private variable str_ChPattern;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("*********************************");
    Trace(strFunctionName_Cut," - START");
    str_ChPattern = Translate("");
    o_str_PickUpReturn = Translate("");
    str_ChPatternTemp = Translate("");
    int_TotalRows = i_int_TipsNeeded / 12;
    str_ChPatternTemp = StrFillLeft(str_ChPatternTemp, Translate("1"), int_TotalRows);
    if (i_bool_PickUpTop == 1)
    {
      str_ChPatternTemp = StrFillRight(str_ChPatternTemp, Translate("0"), 8);
    }
    else
    {
      str_ChPatternTemp = StrFillLeft(str_ChPatternTemp, Translate("0"), 8);
    }
    {
      for(i = 0; i < 12;)
      {
        i = i + 1;
        str_ChPattern = StrConcat2(str_ChPattern, str_ChPatternTemp);
      }
    }
    Trace("Channel Pattern:  ",str_ChPattern);
    __SortSequence2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, i_bool_PickUpTop);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      	o_str_PickUpReturn = arrRetValues[2];
    }
    SeqIncrement(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, i_int_TipsNeeded);
    _RemoveTruncatedSequencePositions(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    Trace(strFunctionName_Cut," - FINISH");
    Trace("*********************************");
  }

  private function _GetNextTipPickUpPosition_Partial2( device & Instrument, sequence i_seq_Source, sequence & o_seq_TipPickUpPosition, variable i_int_TipsNeeded ) void {
    private variable int_Remainder;
    private variable int_CurrentPosition;
    private variable i;
    private variable str_Row;
    private variable str_LabID_ToRemove;
    private variable int_Row;
    private variable str_LabID;
    private variable int_Position;
    private variable int_TotalTipLabware;
    private variable int_ColumnCount;
    private variable str_CurrentRow;
    private variable a;
    private variable int_PositionCount;
    private variable bool_FullRows;
    private variable str_PosID;
    private variable int_TotalPositions;
    private sequence seq_Temp;
    private sequence seq_Temp2;
    private variable arr_LabIDs[];
    private variable str_PosID_AN;
    private variable int_Index;
    { sequence __temp; o_seq_TipPickUpPosition = __temp; }
    SeqRemoveAll(o_seq_TipPickUpPosition);
    _RemoveTruncatedSequencePositions(i_seq_Source);
    SeqGetLabwareIds(i_seq_Source, arr_LabIDs);
    int_TotalTipLabware=arr_LabIDs.GetSize();
    str_LabID_ToRemove = Translate("");
    {
      for(i = 0; i < int_TotalTipLabware;)
      {
        i = i + 1;
        str_LabID=arr_LabIDs.GetAt(i-1);
        int_PositionCount = SeqGetPositionCountForCurrLabware(i_seq_Source);
        int_CurrentPosition = i_seq_Source.GetCurrentPosition();
        if (int_PositionCount >= i_int_TipsNeeded)
        {
          str_LabID_ToRemove = str_LabID;
          {
            for(a = 0; a < int_PositionCount;)
            {
              a = a + 1;
              str_PosID = SeqGetPositionId(i_seq_Source);
              SeqAdd(o_seq_TipPickUpPosition, str_LabID, str_PosID);
              SeqIncrement(i_seq_Source, 1);
            }
          }
          o_seq_TipPickUpPosition.SetCurrentPosition(1);
          MECC::TraceComment(Translate("Check to make sure the sequence contains full rows"));
          __SortSequence2(Instrument, o_seq_TipPickUpPosition, 0);
          int_TotalPositions = SeqGetTotal(o_seq_TipPickUpPosition);
          str_CurrentRow = Translate("");
          SeqRemoveAll(seq_Temp);
          SeqRemoveAll(seq_Temp2);
          int_ColumnCount = 0;
          str_LabID = SeqGetLabwareId(o_seq_TipPickUpPosition);
          bool_FullRows = 1;
          {
            for(int_Index = 0; int_Index < int_TotalPositions;)
            {
              int_Index = int_Index + 1;
              o_seq_TipPickUpPosition.SetCurrentPosition(int_Index);
              str_PosID = SeqGetPositionId(o_seq_TipPickUpPosition);
              int_Position = StrIVal(str_PosID);
              ANC::Convert_Numbers_to_Alpha_Numeric(1, int_Position, 8, 12, str_PosID_AN);
              str_Row = StrLeft(str_PosID_AN, 1);
              if(0){
                int_Row = int_Position / 12;
                int_Remainder = int_Position % 12;
                if (int_Remainder > 0)
                {
                  int_Row = int_Row + 1;
                }
                str_Row = StrConcat2(int_Row, Translate(""));
              }
              if (str_Row != str_CurrentRow)
              {
                if (int_ColumnCount > 0)
                {
                  if (int_ColumnCount == 12)
                  {
                  }
                  else
                  {
                    bool_FullRows = 0;
                    SeqRemoveAll(o_seq_TipPickUpPosition);
                    break;
                  }
                }
                int_ColumnCount = 0;
                str_CurrentRow = str_Row;
                SeqAdd(seq_Temp, str_LabID, str_PosID);
                int_ColumnCount = int_ColumnCount + 1;
              }
              else
              {
                SeqAdd(seq_Temp, str_LabID, str_PosID);
                int_ColumnCount = int_ColumnCount + 1;
              }
              if (int_Index == int_TotalPositions)
              {
                if (int_ColumnCount == 12)
                {
                }
                else
                {
                  bool_FullRows = 0;
                  SeqRemoveAll(o_seq_TipPickUpPosition);
                  break;
                }
              }
            }
          }
          if (bool_FullRows == 1)
          {
            SeqCopySequence(o_seq_TipPickUpPosition, seq_Temp);
            o_seq_TipPickUpPosition.SetCurrentPosition(1);
            break;
          }
        }
        else
        {
          SeqIncrement(i_seq_Source, int_PositionCount);
        }
      }
    }
  }

  function TIP_OFFSET_PickUpTips_Rows( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_int_RowsNeeded, variable i_str_TipCounter, variable i_bool_UseTop ) variable {
    private variable int_CutNum;
    private variable str_SequenceName;
    private variable int_Length;
    private variable int_TotalEmpty;
    private variable strFunctionName;
    private variable int_PositionsSet;
    private variable int_SourceTip_TipType;
    private variable strFunctionName_Cut;
    private variable str_TotalRows;
    private variable int_Count;
    private variable int_TipOffset_TipType;
    private variable int_TipsNeeded;
    private variable str_TipLabID;
    private sequence seq_EmptyPosition;
    private variable ret_str_TipPickUp;
    private variable int_TotalLabwareSet;
    private variable bln_ValueFound;
    private variable str_TipOffsetLabID;
    private sequence seq_Temp;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    ret_str_TipPickUp = Translate("");
    str_TotalRows = StrConcat2(i_int_RowsNeeded, Translate(""));
    i_int_RowsNeeded = StrIVal(str_TotalRows);
    _InitializeLibrary();
    STAR_TIP_TOOLS::GetTipType(ML_STAR, io_seq_SourceTips, int_SourceTip_TipType);
    int_TipsNeeded = i_int_RowsNeeded * 12;
    if (i_int_RowsNeeded == 8)
    {
      ret_str_TipPickUp = _LocalPickUpNextMPH96Tips(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      return (ret_str_TipPickUp);
    }
    _RemoveTruncatedSequencePositions(io_seq_SourceTips);
    _GetFullSequenceCopy(ML_STAR, i_seq_TipOffset, seq_Temp);
    str_TipOffsetLabID = SeqGetLabwareId(seq_Temp);
    SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    int_TotalLabwareSet=TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.GetSize();
    if (int_TotalLabwareSet > 0)
    {
      bln_ValueFound = Util::Lookup(TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, str_TipOffsetLabID, TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX + 1;
      if (bln_ValueFound == BOOLEON::FALSE)
      {
        TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
        TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
        TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
        TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
        TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.AddAsLast(seq_Temp);
      }
      else
      {
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED=TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP=TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT=TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
      }
    }
    else
    {
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
      TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
      TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.AddAsLast(seq_Temp);
    }
    Util2::Debug::TraceArray_2(Translate("Labware               Count"), TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED);
    TRACE::TRACE02(Translate("Current Index:  "), TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
    TRACE::TRACE02(Translate("Current Labware:  "), str_TipOffsetLabID);
    TRACE::TRACE02(Translate("Current Tip Count  "), TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
    if (int_TipsNeeded < 12)
    {
      Trace("****************** Column request of ",i_int_RowsNeeded," is not achievable because it is less than 12 tips!");
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      return (ret_str_TipPickUp);
    }
    if (int_TipsNeeded > 96)
    {
      Trace("****************** Column request of ",i_int_RowsNeeded," is not achievable because it will exceed 96 tips!");
      Trace("");
      Trace(strFunctionName_Cut," - FINISH");
      Trace("===========================================================================");
      return (ret_str_TipPickUp);
    }
    str_SequenceName = SeqGetName(io_seq_SourceTips);
    Trace("Sequence Name:  ",str_SequenceName);
    Trace("Tips loaded:  ",TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
    {
      while (1 == 1)
      {
        _SetEmptyPositions(ML_STAR, io_seq_SourceTips);
        STAR_TIP_TOOLS::GetTipType(ML_STAR, i_seq_TipOffset, int_TipOffset_TipType);
        if (int_SourceTip_TipType != int_TipOffset_TipType)
        {
          if (int_TipOffset_TipType == -1)
          {
            {
              while (1 == 1)
              {
                MECC::TraceComment(Translate("===========================================\nCheck for partial rack of tips\n==========================================="));
                _GetNextTipPickUpPosition_Partial2(ML_STAR, io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH, int_TipsNeeded);
                int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                if (int_PositionsSet == 0)
                {
                  MECC::TraceComment(Translate("===========================================\nCheck for full rack of tips\n==========================================="));
                  _GetNextTipPickUpPosition(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                  int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                  Trace("Full rack check loaded:  ",int_PositionsSet);
                }
                else
                {
                  Trace("Partial rack check loaded:  ",int_PositionsSet);
                }
                if (int_PositionsSet == 0)
                {
                  MECC::TraceComment(Translate("===========================================\nMore tips are needed\n==========================================="));
                  if(0){
                    STAR_TIP_TOOLS::TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
                  }
                  _TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
                }
                if (int_PositionsSet > 1)
                {
                  break;
                }
              }
            }
            str_TipLabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
            LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
            _UpdateTipSequence(io_seq_SourceTips);
            str_TipLabID = SeqGetLabwareId(i_seq_TipOffset);
            LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
            _MoveTipsToOffset(ML_STAR);
          }
          else
          {
            if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED > 0)
            {
              _ReturnTipsToPickUp2(ML_STAR, i_bool_UseTop);
            }
            {
              while (1 == 1)
              {
                MECC::TraceComment(Translate("===========================================\nCheck for partial rack of tips\n==========================================="));
                _GetNextTipPickUpPosition_Partial2(ML_STAR, io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH, int_TipsNeeded);
                int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                if (int_PositionsSet == 0)
                {
                  MECC::TraceComment(Translate("===========================================\nCheck for full rack of tips\n==========================================="));
                  _GetNextTipPickUpPosition(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                  int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                  Trace("Full rack check loaded:  ",int_PositionsSet);
                }
                else
                {
                  Trace("Partial rack check loaded:  ",int_PositionsSet);
                }
                if (int_PositionsSet == 0)
                {
                  MECC::TraceComment(Translate("===========================================\nMore tips are needed\n==========================================="));
                  if(0){
                    STAR_TIP_TOOLS::TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
                  }
                  _TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
                }
                if (int_PositionsSet > 1)
                {
                  break;
                }
              }
            }
            str_TipLabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
            LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
            _UpdateTipSequence(io_seq_SourceTips);
            str_TipLabID = SeqGetLabwareId(i_seq_TipOffset);
            LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
            _MoveTipsToOffset(ML_STAR);
          }
        }
        if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED > 0)
        {
          if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED < int_TipsNeeded)
          {
            _GetNextTipPickUpPosition_Partial2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, seq_EmptyPosition, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
            int_TotalEmpty = SeqGetTotal(seq_EmptyPosition);
            if (int_TotalEmpty > 0)
            {
              SeqCopySequence(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, seq_EmptyPosition);
              _AppendRemainderTipsToCurrentSequence(ML_STAR, io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
            }
            else
            {
              _AddRemainderTipsToCurrentSequence(ML_STAR, io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
            }
            _ReturnTipsToPickUp2(ML_STAR, i_bool_UseTop);
            __SortSequence(ML_STAR, io_seq_SourceTips, 0);
            STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
            DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
          }
        }
        else
        {
          {
            while (1 == 1)
            {
              MECC::TraceComment(Translate("===========================================\nCheck for partial rack of tips\n==========================================="));
              _GetNextTipPickUpPosition_Partial2(ML_STAR, io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH, int_TipsNeeded);
              int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
              if (int_PositionsSet == 0)
              {
                MECC::TraceComment(Translate("===========================================\nCheck for full rack of tips\n==========================================="));
                _GetNextTipPickUpPosition(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                int_PositionsSet = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
                Trace("Full rack check loaded:  ",int_PositionsSet);
              }
              else
              {
                Trace("Partial rack check loaded:  ",int_PositionsSet);
              }
              if (int_PositionsSet == 0)
              {
                MECC::TraceComment(Translate("===========================================\nMore tips are needed\n==========================================="));
                if(0){
                  STAR_TIP_TOOLS::TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
                }
                _TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
              }
              if (int_PositionsSet > 1)
              {
                break;
              }
            }
          }
          str_TipLabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::SOURCE_TIP_REFRESH);
          LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
          _UpdateTipSequence(io_seq_SourceTips);
          str_TipLabID = SeqGetLabwareId(i_seq_TipOffset);
          LPQ::SEQ_GetDefaultSequence(ML_STAR, str_TipLabID, 1, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
          _MoveTipsToOffset(ML_STAR);
        }
        Trace("Tips loaded:  ",TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
        if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED > 0)
        {
          _PickUpTips2(ML_STAR, int_TipsNeeded, i_bool_UseTop, ret_str_TipPickUp);
          break;
        }
      }
    }
    _RemoveTruncatedSequencePositions(io_seq_SourceTips);
    __SortSequence(ML_STAR, io_seq_SourceTips, 0);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
    TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.SetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
    TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.SetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    _RemoveTruncatedSequencePositions(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.SetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1, TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
    DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    return (ret_str_TipPickUp);
  }

  function TIP_OFFSET_CleanUpTips_Rows( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_str_TipCounter ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable i;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable str_LabID;
    private variable str_TipOffsetLabID;
    private variable int_Count;
    private variable str_PosID;
    private sequence seq_EjectSequence;
    private variable int_TotalLabwareSet;
    private variable bln_ValueFound;
    private sequence seq_Temp;
    private variable str_LabIDReturn;
    private variable int_TotalEmpty;
    private sequence seq_EmptyPosition;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    _RemoveTruncatedSequencePositions(io_seq_SourceTips);
    _GetFullSequenceCopy(ML_STAR, i_seq_TipOffset, seq_Temp);
    str_TipOffsetLabID = SeqGetLabwareId(seq_Temp);
    SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    int_TotalLabwareSet=TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.GetSize();
    if (int_TotalLabwareSet > 0)
    {
      bln_ValueFound = Util::Lookup(TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, str_TipOffsetLabID, TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX + 1;
      if (bln_ValueFound == BOOLEON::FALSE)
      {
        TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
        TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
        TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
        TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      }
      else
      {
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED=TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP=TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT=TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
      }
    }
    else
    {
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
      TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
      TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.AddAsLast(seq_Temp);
    }
    Util2::Debug::TraceArray_2(Translate("Labware               Count"), TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED);
    str_LabIDReturn = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    TRACE::TRACE02(Translate("Current Index:  "), TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
    TRACE::TRACE02(Translate("Return Labware:  "), str_LabIDReturn);
    TRACE::TRACE02(Translate("Current Tip Count  "), TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
    if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED > 0)
    {
      _InitializeLibrary();
      _ConvertToString(i_str_TipCounter);
      _RemoveTruncatedSequencePositions(io_seq_SourceTips);
      _SetEmptyPositions(ML_STAR, io_seq_SourceTips);
      TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
      _GetNextTipPickUpPosition_Partial2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, seq_EmptyPosition, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      int_TotalEmpty = SeqGetTotal(seq_EmptyPosition);
      if (int_TotalEmpty > 0)
      {
        SeqCopySequence(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, seq_EmptyPosition);
      }
      if(0){
        _GetConsecutiveSequencePositions2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED, 1, seq_EjectSequence);
      }
      __SortSequence2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 0);
      {
        for(i = 0; i < TIP_OFFSET_GLOBAL::INT::TIPS_LOADED;)
        {
          i = i + 1;
          TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP.SetCurrentPosition(i);
          str_LabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
          str_PosID = SeqGetPositionId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
          SeqAdd(io_seq_SourceTips, str_LabID, str_PosID);
        }
      }
      TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP.SetCurrentPosition(1);
      io_seq_SourceTips.SetCurrentPosition(1);
      __SortSequence2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 0);
      _ReturnTipsToPickUp2(ML_STAR, BOOLEON::TRUE);
      str_TipOffsetLabID = SeqGetLabwareId(i_seq_TipOffset);
      LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, str_TipOffsetLabID, Translate("MlStarTipRack"), -1);
      LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, str_TipOffsetLabID, Translate("MlStarCore96TipRack"), -1);
      _RemoveTruncatedSequencePositions(io_seq_SourceTips);
      __SortSequence(ML_STAR, io_seq_SourceTips, 0);
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.SetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
    }
    else
    {
      MECC::TraceComment(Translate("====================================================================\nNo tips to clean up\n===================================================================="));
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function TOOL_GetLiquidLevelHeight( device & ML_STAR, variable i_str_ReturnValue3FromTipPickUp, variable i_str_ReturnValue3FromPipetting, variable & o_flt_LiquidLevelHeight ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable z_LLD_height;
    private variable strFW_return;
    private variable steps_to_mm;
    private variable strFW_digits;
    private variable str_LabIDTipPickUp;
    private variable str_LabIDTipPipetting;
    private sequence seq_TempTipPickUp;
    private sequence seq_TempPipetting;
    private variable int_TipType;
    private variable flt_TipLength;
    private variable flt_NotUsed;
    private variable flt_ZBottom;
    private variable bln_SimMode;
    o_flt_LiquidLevelHeight = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    bln_SimMode = Util::GetSimulationMode();
    str_LabIDTipPickUp = StepReturn::GetLabwareId(1, i_str_ReturnValue3FromTipPickUp);
    str_LabIDTipPipetting = StepReturn::GetLabwareId(1, i_str_ReturnValue3FromPipetting);
    LPQ::SEQ_GetDefaultSequence(ML_STAR, str_LabIDTipPickUp, 1, seq_TempTipPickUp);
    LPQ::SEQ_GetDefaultSequence(ML_STAR, str_LabIDTipPipetting, 1, seq_TempPipetting);
    LPQ::LABWARE_GetCurrentPosition(ML_STAR, seq_TempPipetting, flt_NotUsed, flt_NotUsed, flt_ZBottom);
    STAR_TIP_TOOLS::GetTipType(ML_STAR, seq_TempTipPickUp, int_TipType);
    STAR_TIP_TOOLS::TipTypeLength_Get(int_TipType, flt_TipLength);
    if (bln_SimMode == 0)
    {
      if (G_FW_PIP_COM_InstrumentType <= 2)
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	strFW_return = arrRetValues[3];
        }
        strFW_digits = StrRight(strFW_return, 5);
        strFW_digits = StrIVal(strFW_digits);
        steps_to_mm = 0.005 * strFW_digits;
        z_LLD_height = steps_to_mm - flt_TipLength;
      }
      else
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	strFW_return = arrRetValues[3];
        }
        strFW_digits = StrRight(strFW_return, 5);
        strFW_digits = StrIVal(strFW_digits);
        steps_to_mm = 0.005 * strFW_digits;
        z_LLD_height = steps_to_mm - flt_TipLength;
      }
    }
    else
    {
      z_LLD_height = flt_ZBottom + 10.0;
    }
    o_flt_LiquidLevelHeight = z_LLD_height - flt_ZBottom;
    TRACE::TRACE02(Translate("     ----- Pipetting Lab ID:  "), str_LabIDTipPipetting);
    TRACE::TRACE02(Translate("     ----- Tip Pick Up Lab ID:  "), str_LabIDTipPickUp);
    TRACE::TRACE02(Translate("     ----- Tip Length:  "), flt_TipLength);
    TRACE::TRACE02(Translate("     ----- Liquid Level Height Measured:  "), o_flt_LiquidLevelHeight);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function MOVE_MPH96ToBack( device & ML_STAR ) void {
    private variable bol_MPH96_Available;
    bol_MPH96_Available = DevGetCfgValueWithKey(ML_STAR, 24);
    if (bol_MPH96_Available == 1)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }

  private function _GetConsecutiveSequencePositions2( device & ML_STAR, sequence i_seq_SourcePositions, variable i_int_TotalPositionsNeeded, variable i_bool_BottomToFront, sequence & o_seq_ConsecutivePositions ) void {
    private variable int_Remainder;
    private variable int_Column;
    private variable i;
    private variable int_RowCount;
    private variable int_CurrentColumn;
    private variable str_CurrentPosID;
    private variable str_LabID;
    private variable int_Position;
    private variable int_PositionsAdded;
    private variable str_CurrentLabID;
    private variable int_TotalPositions;
    private sequence seq_FullSequence;
    private variable int_ColumnCount;
    private variable int_Row;
    private variable int_CurrentRow;
    private variable int_RowCheck;
    SeqRemoveAll(o_seq_ConsecutivePositions);
    __SortSequence2(ML_STAR, seq_FullSequence, i_bool_BottomToFront);
    int_TotalPositions = SeqGetTotal(i_seq_SourcePositions);
    __SortSequence2(ML_STAR, i_seq_SourcePositions, i_bool_BottomToFront);
    int_CurrentRow = 0;
    int_ColumnCount = 0;
    int_PositionsAdded = 0;
    str_LabID = Translate("");
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        i_seq_SourcePositions.SetCurrentPosition(i);
        str_CurrentLabID = SeqGetLabwareId(i_seq_SourcePositions);
        str_CurrentPosID = SeqGetPositionId(i_seq_SourcePositions);
        int_Position = StrIVal(str_CurrentPosID);
        int_Row = int_Position / 12;
        int_Remainder = int_Position % 12;
        if (int_Remainder > 0)
        {
          int_Row = int_Row + 1;
        }
        if (str_CurrentLabID != str_LabID)
        {
          SeqRemoveAll(o_seq_ConsecutivePositions);
          int_ColumnCount = 0;
          int_CurrentRow = int_Row;
          int_PositionsAdded = 0;
          str_LabID = str_CurrentLabID;
        }
        if (int_Column != int_CurrentColumn)
        {
          if (i_bool_BottomToFront == 1)
          {
            int_RowCheck = int_CurrentRow - int_Row;
          }
          else
          {
            int_RowCheck = int_Row - int_CurrentRow;
          }
          if (int_RowCheck != 12)
          {
            SeqRemoveAll(o_seq_ConsecutivePositions);
            int_ColumnCount = 0;
            int_CurrentRow = int_Row;
            int_PositionsAdded = 0;
            str_LabID = str_CurrentLabID;
          }
          else
          {
            if (int_RowCheck != 1)
            {
              SeqRemoveAll(o_seq_ConsecutivePositions);
              int_ColumnCount = 0;
              int_CurrentRow = int_Row;
              int_PositionsAdded = 0;
              str_LabID = str_CurrentLabID;
            }
            else
            {
              int_ColumnCount = 0;
              if (i_bool_BottomToFront == 1)
              {
                int_CurrentRow = int_CurrentRow - 1;
              }
              else
              {
                int_CurrentRow = int_CurrentRow + 1;
              }
            }
          }
        }
        int_ColumnCount = int_ColumnCount + 1;
        int_PositionsAdded = int_PositionsAdded + 1;
        SeqAdd(o_seq_ConsecutivePositions, str_CurrentLabID, str_CurrentPosID);
        if(0){
          Trace("Current Row count:  ",int_RowCount,"  Positions added:  ",int_PositionsAdded);
        }
        if (int_PositionsAdded == i_int_TotalPositionsNeeded)
        {
          break;
        }
      }
    }
    o_seq_ConsecutivePositions.SetCurrentPosition(1);
    int_TotalPositions = SeqGetTotal(o_seq_ConsecutivePositions);
    if (int_TotalPositions < i_int_TotalPositionsNeeded)
    {
      SeqRemoveAll(o_seq_ConsecutivePositions);
    }
  }

  function TOOL_ChangePickUpMode( device & ML_STAR, sequence i_seq_TipPositionToAdjust, variable i_int_PickUpMode ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable int_PickUpMode;
    private variable str_Parameter;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    str_Parameter = Translate("MlStarIsCoreHeadSpecialTipPickup");
    int_PickUpMode = 0;
    if (i_int_PickUpMode == 1)
    {
      int_PickUpMode = 1;
    }
    if (i_int_PickUpMode == 2)
    {
      int_PickUpMode = 2;
    }
    LPQ::ADJUST_SetProperties(ML_STAR, i_seq_TipPositionToAdjust, str_Parameter, int_PickUpMode);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function TOOL_PickUpNextMPH96Tips( device & ML_STAR, sequence & io_seq_SourceTips, variable i_str_TipCounter ) variable {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable int_TotalPositions;
    private variable ret_str_ReturnValue;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    ret_str_ReturnValue = Translate("");
    _InitializeLibrary();
    _ConvertToString(i_str_TipCounter);
    MECC::TraceComment(Translate("====================================================================\nPick up full rack of tips\n===================================================================="));
    {
      while (1 == 1)
      {
        _GetNextTipPickUpPosition(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
        int_TotalPositions = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
        if (int_TotalPositions != 96)
        {
          STAR_TIP_TOOLS::TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
        }
        else
        {
          break;
        }
      }
    }
    _RemoveSequencePositions(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      	ret_str_ReturnValue = arrRetValues[2];
    }
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
    return (ret_str_ReturnValue);
  }

  function TOOL_GetTipPresence( device & ML_STAR, variable & o_bln_TipLoaded ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable strFW_return;
    private variable strFW_digits;
    o_bln_TipLoaded = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    if (G_FW_PIP_COM_InstrumentType <= 2)
    {
      o_bln_TipLoaded = 0;
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	strFW_return = arrRetValues[3];
      }
      strFW_digits = StrRight(strFW_return, 1);
      strFW_digits = StrIVal(strFW_digits);
      o_bln_TipLoaded = strFW_digits;
    }
    else
    {
      o_bln_TipLoaded = 0;
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	strFW_return = arrRetValues[3];
      }
      strFW_digits = StrRight(strFW_return, 1);
      strFW_digits = StrIVal(strFW_digits);
      o_bln_TipLoaded = strFW_digits;
    }
    if(o_bln_TipLoaded == 1)o_bln_TipLoaded = hslTrue;
    if(o_bln_TipLoaded == 0)o_bln_TipLoaded = hslFalse;
    TRACE::TRACE02(Translate("     MPH96 Tip Loaded:  "), o_bln_TipLoaded);
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  private function _LocalPickUpNextMPH96Tips( device & ML_STAR, sequence & io_seq_SourceTips, variable i_str_TipCounter ) variable {
    private variable ret_str_ReturnValue;
    private variable int_TotalPositions;
    ret_str_ReturnValue = Translate("");
    _InitializeLibrary();
    _ConvertToString(i_str_TipCounter);
    MECC::TraceComment(Translate("====================================================================\nPick up full rack of tips\n===================================================================="));
    {
      while (1 == 1)
      {
        _GetNextTipPickUpPosition(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
        int_TotalPositions = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
        if (int_TotalPositions != 96)
        {
          if(0){
            STAR_TIP_TOOLS::TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
          }
          _TipCheckMPH96(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
        }
        else
        {
          break;
        }
      }
    }
    _RemoveSequencePositions(io_seq_SourceTips, TIP_OFFSET_GLOBAL::SEQ::TIP_PICK_UP);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      	ret_str_ReturnValue = arrRetValues[2];
    }
    return (ret_str_ReturnValue);
  }

  function TIP_OFFSET_CleanUpTips_Rows2( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_str_TipCounter ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable i;
    private variable int_TotalEmpty;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable str_LabID;
    private variable str_LabIDReturn;
    private variable int_TotalLabwareSet;
    private variable bln_ValueFound;
    private variable int_Count;
    private variable str_TipOffsetLabID;
    private variable str_PosID;
    private sequence seq_EjectSequence;
    private sequence seq_Temp;
    private sequence seq_EmptyPosition;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    _RemoveTruncatedSequencePositions(io_seq_SourceTips);
    _GetFullSequenceCopy(ML_STAR, i_seq_TipOffset, seq_Temp);
    str_TipOffsetLabID = SeqGetLabwareId(seq_Temp);
    SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    int_TotalLabwareSet=TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.GetSize();
    if (int_TotalLabwareSet > 0)
    {
      bln_ValueFound = Util::Lookup(TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, str_TipOffsetLabID, TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX + 1;
      if (bln_ValueFound == BOOLEON::FALSE)
      {
        TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
        TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
        TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
        TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      }
      else
      {
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED=TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP=TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT=TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
      }
    }
    else
    {
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
      TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
      TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.AddAsLast(seq_Temp);
    }
    Util2::Debug::TraceArray_2(Translate("Labware               Count"), TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED);
    str_LabIDReturn = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    TRACE::TRACE02(Translate("Current Index:  "), TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
    TRACE::TRACE02(Translate("Return Labware:  "), str_LabIDReturn);
    TRACE::TRACE02(Translate("Current Tip Count  "), TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
    if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED > 0)
    {
      _InitializeLibrary();
      _ConvertToString(i_str_TipCounter);
      _RemoveTruncatedSequencePositions(io_seq_SourceTips);
      _SetEmptyPositions(ML_STAR, io_seq_SourceTips);
      TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
      _GetNextTipPickUpPosition_Partial2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, seq_EmptyPosition, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      int_TotalEmpty = SeqGetTotal(seq_EmptyPosition);
      if (int_TotalEmpty > 0)
      {
        SeqCopySequence(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, seq_EmptyPosition);
      }
      if(0){
        _GetConsecutiveSequencePositions2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED, 1, seq_EjectSequence);
      }
      __SortSequence2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 1);
      {
        for(i = 0; i < TIP_OFFSET_GLOBAL::INT::TIPS_LOADED;)
        {
          i = i + 1;
          TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP.SetCurrentPosition(i);
          str_LabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
          str_PosID = SeqGetPositionId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
          SeqAdd(io_seq_SourceTips, str_LabID, str_PosID);
        }
      }
      TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP.SetCurrentPosition(1);
      io_seq_SourceTips.SetCurrentPosition(1);
      __SortSequence2(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 0);
      _ReturnTipsToPickUp2(ML_STAR, BOOLEON::FALSE);
      str_TipOffsetLabID = SeqGetLabwareId(i_seq_TipOffset);
      LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, str_TipOffsetLabID, Translate("MlStarTipRack"), -1);
      LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, str_TipOffsetLabID, Translate("MlStarCore96TipRack"), -1);
      _RemoveTruncatedSequencePositions(io_seq_SourceTips);
      __SortSequence(ML_STAR, io_seq_SourceTips, 0);
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.SetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
    }
    else
    {
      MECC::TraceComment(Translate("====================================================================\nNo tips to clean up\n===================================================================="));
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  function TIP_OFFSET_CleanUpTips_Column2( device & ML_STAR, sequence & io_seq_SourceTips, sequence i_seq_TipOffset, variable i_str_TipCounter ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable i;
    private variable int_TotalEmpty;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable str_LabID;
    private variable int_TotalLabwareSet;
    private variable bln_ValueFound;
    private variable int_Count;
    private variable str_TipOffsetLabID;
    private variable str_PosID;
    private sequence seq_EjectSequence;
    private sequence seq_Temp;
    private sequence seq_EmptyPosition;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    Trace("===========================================================================");
    Trace(strFunctionName_Cut," - START");
    Trace("");
    _GetFullSequenceCopy(ML_STAR, i_seq_TipOffset, seq_Temp);
    str_TipOffsetLabID = SeqGetLabwareId(seq_Temp);
    SeqRemoveAll(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
    int_TotalLabwareSet=TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.GetSize();
    if (int_TotalLabwareSet > 0)
    {
      bln_ValueFound = Util::Lookup(TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, str_TipOffsetLabID, TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX + 1;
      if (bln_ValueFound == BOOLEON::FALSE)
      {
        TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
        TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
        TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
        TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      }
      else
      {
        TIP_OFFSET_GLOBAL::INT::TIPS_LOADED=TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP=TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
        TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT=TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.GetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1);
      }
    }
    else
    {
      TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX = int_TotalLabwareSet + 1;
      TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = 0;
      TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID.AddAsLast(str_TipOffsetLabID);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.AddAsLast(TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      TIP_OFFSET_GLOBAL::ARR::TIPS_RETURN_POSITION.AddAsLast(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
      TIP_OFFSET_GLOBAL::ARR::TIPS_OFFSET_CURRENT.AddAsLast(seq_Temp);
    }
    Util2::Debug::TraceArray_2(Translate("Labware               Count"), TIP_OFFSET_GLOBAL::ARR::TIP_OFFSET_LAB_ID, TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED);
    TRACE::TRACE02(Translate("Current Index:  "), TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX);
    TRACE::TRACE02(Translate("Current Labware:  "), str_TipOffsetLabID);
    TRACE::TRACE02(Translate("Current Tip Count  "), TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
    if (TIP_OFFSET_GLOBAL::INT::TIPS_LOADED > 0)
    {
      _InitializeLibrary();
      _ConvertToString(i_str_TipCounter);
      _RemoveTruncatedSequencePositions(io_seq_SourceTips);
      _SetEmptyPositions(ML_STAR, io_seq_SourceTips);
      TIP_OFFSET_GLOBAL::INT::TIPS_LOADED = SeqGetTotal(TIP_OFFSET_GLOBAL::SEQ::TIP_OFFSET_CURRENT);
      if(0){
        _GetConsecutiveSequencePositions(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED, 1, seq_EjectSequence);
      }
      _GetNextTipPickUpPosition_Partial(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::EMPTY_POSITIONS, seq_EmptyPosition, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      int_TotalEmpty = SeqGetTotal(seq_EmptyPosition);
      if (int_TotalEmpty > 0)
      {
        SeqCopySequence(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, seq_EmptyPosition);
      }
      __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 1);
      {
        for(i = 0; i < TIP_OFFSET_GLOBAL::INT::TIPS_LOADED;)
        {
          i = i + 1;
          TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP.SetCurrentPosition(i);
          str_LabID = SeqGetLabwareId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
          str_PosID = SeqGetPositionId(TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP);
          SeqAdd(io_seq_SourceTips, str_LabID, str_PosID);
        }
      }
      TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP.SetCurrentPosition(1);
      io_seq_SourceTips.SetCurrentPosition(1);
      __SortSequence(ML_STAR, TIP_OFFSET_GLOBAL::SEQ::RETURN_TO_PICKUP, 0);
      _ReturnTipsToPickUp(ML_STAR, BOOLEON::FALSE);
      str_TipOffsetLabID = SeqGetLabwareId(i_seq_TipOffset);
      LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, str_TipOffsetLabID, Translate("MlStarTipRack"), -1);
      LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, str_TipOffsetLabID, Translate("MlStarCore96TipRack"), -1);
      _RemoveTruncatedSequencePositions(io_seq_SourceTips);
      __SortSequence(ML_STAR, io_seq_SourceTips, 0);
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, io_seq_SourceTips, i_str_TipCounter);
      TIP_OFFSET_GLOBAL::ARR::TIPS_LOADED.SetAt(TIP_OFFSET_GLOBAL::INT::OFFSET_INDEX-1, TIP_OFFSET_GLOBAL::INT::TIPS_LOADED);
      DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
    }
    else
    {
      MECC::TraceComment(Translate("====================================================================\nNo tips to clean up\n===================================================================="));
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_SourceTips, 5, Translate(""));
    Trace("");
    Trace(strFunctionName_Cut," - FINISH");
    Trace("===========================================================================");
  }

  private function _TipCheckMPH96( device & Instrument, sequence & io_seq_Tips, variable i_str_TipCounter ) void {
    private dialog customDialog_1;
    private variable int_CurrentPosition;
    private variable flt_TipCapacity;
    private variable str_TipMessage;
    private variable int_EndPosition;
    private variable int_PositionsRemaining;
    private variable int_TipsNeeded;
    private variable str_TipName;
    private sequence seq_PickUpPosition;
    MECC::TraceComment(Translate("=========  Check tip sequence"));
    STAR_TIP_TOOLS::TipCapacityCheck(Instrument, io_seq_Tips, flt_TipCapacity);
    if (flt_TipCapacity == 0.0)
    {
      flt_TipCapacity = Translate("Unknown");
    }
    str_TipName = StrConcat4(flt_TipCapacity, Translate(" uL Tips"), Translate(""), Translate(""));
    str_TipMessage = StrConcat4(Translate("Please load more "), str_TipName, Translate(" on to the deck."), Translate(""));
    int_TipsNeeded = 96;
    {
      while (1 == 1)
      {
        _GetNextTipPickUpPosition(io_seq_Tips, seq_PickUpPosition);
        int_CurrentPosition = seq_PickUpPosition.GetCurrentPosition();
        int_EndPosition = seq_PickUpPosition.GetCount();
        if (int_CurrentPosition == 0)
        {
          int_CurrentPosition = int_EndPosition + 1;
        }
        int_PositionsRemaining = int_EndPosition - int_CurrentPosition;
        int_PositionsRemaining = int_PositionsRemaining + 1;
        if (int_PositionsRemaining > 0)
        {
          int_PositionsRemaining = SeqGetPositionCountForCurrLabware(seq_PickUpPosition);
        }
        Trace("     ","Positions Remaining:  ",int_PositionsRemaining,"  Tips Needed:  ",int_TipsNeeded);
        if (int_PositionsRemaining >= int_TipsNeeded)
        {
          MECC::TraceComment(Translate("------------------  Sufficient tips found"));
          break;
        }
        MECC::TraceComment(Translate("------------------  Insufficient tips found"));
        customDialog_1.InitCustomDialog("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");
        customDialog_1.SetCustomDialogProperty( "textBlock2.Text", str_TipMessage );
        customDialog_1.ShowCustomDialog();
        STAR_TIP_TOOLS::ResetInputSequence(Instrument, io_seq_Tips);
        STAR_TIP_TOOLS::TipCounter_Edit(Instrument, io_seq_Tips, i_str_TipCounter, 99999);
      }
    }
  }

  private function ABSTRACT(  ) void {
  }
} // library namespace
