#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "ASWStandardDialogs\\AswStatusDialog.hsl"
#include "Artel\\Library\\Data_Controller_GlobalVariables.hsl"
#include "HSLDevLib.hsl"
#include "EmailUtilities\\HSLEmailUtilLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace SGE {
  variable _intGripSpeed;
  variable _intGripWidthOpen;
  variable _intGripForce;
  variable _intGetCheck;
  variable _intPlaceCheck;
  variable _intZSpeed;
  variable _intPlatePress;
  variable _intXAcceleration;
  variable _intGripWidth;
  variable _intGripHeight;
  function AdminDetect( variable _strEmail ) variable ;
  function SetEmailSettings( variable _strEmail ) void ;
  function Test( device & ML_STAR ) void ;
  function Trp_CoreGrips( device & ML_STAR, sequence & _seqCOREGrip, sequence & _seqSource, sequence & _seqDestination, variable _intLabwareNum, variable _intParkAfterTrp ) void ;
  private function _LabwareTrp( variable _strLabwareID ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Trp_CoreGrips( device & ML_STAR, sequence & _seqCOREGrip, sequence & _seqSource, sequence & _seqDestination, variable _intLabwareNum, variable _intParkAfterTrp ) void {
    private variable _strMethodName;
    private variable _strFunctionName;
    private variable _strSourceLabwareID;
    private variable _strDestinationLabwareID;
    private variable _intDestSeqEnd;
    private variable _blnEject;
    private variable _loopCounter1;
    private variable _intSrcSeqEnd;
    private variable _intSrcPos;
    private variable _intDestPos;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    _strFunctionName = Translate("");
    _strMethodName = Translate("");
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate("= "));
    {
         _strFunctionName = GetFunctionName();     //Retrieves the name of the Sub-method being run
         _strMethodName = GetMethodFileName();     //Retrieves the name of the method being run
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, _strFunctionName, _strMethodName, Translate("Start of the submethod"));
    _strSourceLabwareID = SeqGetLabwareId(_seqSource);
    _intSrcPos = StrFind(_strSourceLabwareID, Translate("_0"));
    _strSourceLabwareID = StrLeft(_strSourceLabwareID, _intSrcPos);
    _strDestinationLabwareID = SeqGetLabwareId(_seqDestination);
    _intDestPos = StrFind(_strDestinationLabwareID, Translate("_0"));
    _strDestinationLabwareID = StrLeft(_strDestinationLabwareID, _intDestPos);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _strSourceLabwareID = "), _strSourceLabwareID);
    _LabwareTrp(_strSourceLabwareID);
    if (_strSourceLabwareID != _strDestinationLabwareID)
    {
      MECC::TraceComment(Translate("Source and destiantion sequences contain different labware"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _strSourceLabwareID = "), _strSourceLabwareID);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _strDestinationLabwareID = "), _strDestinationLabwareID);
      abort;
    }
    _intSrcSeqEnd = _seqSource.GetCount();
    _intDestSeqEnd = _seqDestination.GetCount();
    if (_intSrcSeqEnd != _intDestSeqEnd)
    {
      MECC::TraceComment(Translate("Source and destiantion sequences contain different number of positions"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _intSrcSeqEnd = "), _intSrcSeqEnd);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _intDestSeqEnd = "), _intDestSeqEnd);
      abort;
    }
    if (_intLabwareNum > _intSrcSeqEnd)
    {
      MECC::TraceComment(Translate("Number of plates to transfer is greater than number of positions in the sequence"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _intLabwareNum = "), _intLabwareNum);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _intSrcSeqEnd = "), _intSrcSeqEnd);
      abort;
    }
    MECC::TraceComment(Translate("========== Transport Labware =========="));
    _seqSource.SetCount(_intLabwareNum);
    {
      _loopCounter1 = 0;
      while (
         (_seqSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, _seqSource, 1);
        _loopCounter1 = _loopCounter1 + 1;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Loop Number = "), _loopCounter1);
        if (_loopCounter1 == _intLabwareNum)
        {
          _blnEject = 0;
        }
        else
        {
          _blnEject = _intParkAfterTrp;
        }
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        SeqIncrement(_seqSource, 1);
        SeqIncrement(_seqDestination, 1);
        if (
           (_seqSource.GetCurrentPosition() > 0 && _seqSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      _seqSource.SetMax(_seqSource.GetTotal());
      _seqSource.SetCurrentPosition(1);
    }
    _strFunctionName = Translate("");
    _strMethodName = Translate("");
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE, Translate("= "));
    {
         _strFunctionName = GetFunctionName();     //Retrieves the name of the Sub-method being run
         _strMethodName = GetMethodFileName();     //Retrieves the name of the method being run
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, _strFunctionName, _strMethodName, Translate("End of the submethod"));
  }

  private function _LabwareTrp( variable _strLabwareID ) void {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("= = = = = = = = = = = = = = = = = = = "), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Acquire labware transport details: Start"), Translate(""));
    if (_strLabwareID == "Greiner_AutoFlask")
    {
      _intGripHeight = 5.2;
      _intGripWidth = 78.2;
      _intGripWidthOpen = 86;
      _intGripForce = 5;
      _intGripSpeed = 277.8;
      _intZSpeed = 60;
      _intGetCheck = 0;
      _intXAcceleration = 1;
      _intPlatePress = 1;
      _intPlaceCheck = 0;
    }
    if (_strLabwareID == "Greiner_AutoFlask")
    {
      _intGripHeight = 5.2;
      _intGripWidth = 78.2;
      _intGripWidthOpen = 86;
      _intGripForce = 5;
      _intGripSpeed = 277.8;
      _intZSpeed = 60;
      _intGetCheck = 0;
      _intXAcceleration = 1;
      _intPlatePress = 1;
      _intPlaceCheck = 0;
    }
    Trace("_intGripHeight = ", _intGripHeight);
    Trace("_intGripWidth = ", _intGripWidth);
    Trace("_intGripWidthOpen = ", _intGripWidthOpen);
    Trace("_intGripForce = ", _intGripForce);
    Trace("_intGripSpeed = ", _intGripSpeed);
    Trace("_intZSpeed = ", _intZSpeed);
    Trace("_intGetCheck = ", _intGetCheck);
    Trace("_intXAcceleration = ", _intXAcceleration);
    Trace("_intPlatePress = ", _intPlatePress);
    Trace("_intPlaceCheck = ", _intPlaceCheck);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Acquire labware transport details: End"), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("= = = = = = = = = = = = = = = = = = = "), Translate(""));
  }

  function Test( device & ML_STAR ) void {
    private variable _strMethodName;
    private variable _strFunctionName;
    private variable _blnAutoLoad;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    _strFunctionName = Translate("");
    _strMethodName = Translate("");
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate("= "));
    {
         _strFunctionName = GetFunctionName();     //Retrieves the name of the Sub-method being run
         _strMethodName = GetMethodFileName();     //Retrieves the name of the method being run
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, _strFunctionName, _strMethodName, Translate("Start of the submethod"));
    _blnAutoLoad = DevGetCfgValueWithKey(ML_STAR, 3);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _blnAutoLoad = "), _blnAutoLoad);
    if(0){
      DATA_CONTROLLER::INIT::InitializeVariables(ML_STAR);
      AswStatusDialog::Initialize(_strMethodName);
      AswStatusDialog::AppendText(Translate("Please See If This Works"));
    }
    _strFunctionName = Translate("");
    _strMethodName = Translate("");
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE, Translate("= "));
    {
         _strFunctionName = GetFunctionName();     //Retrieves the name of the Sub-method being run
         _strMethodName = GetMethodFileName();     //Retrieves the name of the method being run
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, _strFunctionName, _strMethodName, Translate("End of the submethod"));
  }

  function SetEmailSettings( variable _strEmail ) void {
    private variable _strMethodName;
    private variable _strFunctionName;
    private variable _strEmailSender;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    _strFunctionName = Translate("");
    _strMethodName = Translate("");
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate("/    "));
    {
         _strFunctionName = GetFunctionName();     //Retrieves the name of the Sub-method being run
         _strMethodName = GetMethodFileName();     //Retrieves the name of the method being run
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, _strFunctionName, _strMethodName, Translate("Start of the submethod"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _strEmail = "), _strEmail);
    EmailUtilLib::SetSMTPServerHostName(Translate(""));
    EmailUtilLib::ChangeRecieverAddress(_strEmail);
    _strEmailSender = StrConcat4(_strMethodName, Translate("@sanger.ac.uk"), Translate(""), Translate(""));
    EmailUtilLib::SetEMailAddressOfSender(_strEmailSender);
    _strFunctionName = Translate("");
    _strMethodName = Translate("");
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE, Translate("\   "));
    {
         _strFunctionName = GetFunctionName();     //Retrieves the name of the Sub-method being run
         _strMethodName = GetMethodFileName();     //Retrieves the name of the method being run
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, _strFunctionName, _strMethodName, Translate("End of the submethod"));
  }

  function AdminDetect( variable _strEmail ) variable {
    private variable _strMethodName;
    private variable _strFunctionName;
    private variable _strUser;
    private variable _varPosition;
    private variable _varReturn;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    _strFunctionName = Translate("");
    _strMethodName = Translate("");
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate("/"));
    {
         _strFunctionName = GetFunctionName();     //Retrieves the name of the Sub-method being run
         _strMethodName = GetMethodFileName();     //Retrieves the name of the method being run
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, _strFunctionName, _strMethodName, Translate("Start of the submethod"));
    _varReturn = 0;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _strEmail = "), _strEmail);
    _varPosition = StrFind(_strEmail, Translate("@sanger.ac.uk"));
    if (_varPosition == -1)
    {
      _varReturn = 1;
    }
    _strUser = StrLeft(_strEmail, _varPosition);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _strUser = "), _strUser);
    if (_strUser == "ch33")
       {_varReturn =1;}
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// _blnAdmin = "), _varReturn);
    _strFunctionName = Translate("");
    _strMethodName = Translate("");
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE, Translate("/"));
    {
         _strFunctionName = GetFunctionName();     //Retrieves the name of the Sub-method being run
         _strMethodName = GetMethodFileName();     //Retrieves the name of the method being run
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, _strFunctionName, _strMethodName, Translate("End of the submethod"));
    return (_varReturn);
  }
} // library namespace
