#pragma once
#include "Artel\\Resources\\Library\\Data_Controller_GlobalVariables.hsl"
#include "Artel\\Resources\\Library\\ConfigurationEditor.hs_"
#include "HSLStrLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLMthLib.hsl"
#include "STAR Tools\\STAR Channel Tools.hs_"
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "STAR Tools\\STAR MPH96 Tools.hs_"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLVectorDbTracking.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLExtensions\\Sequence.hsl"
//#include "HSL_MethodHelper.hsl"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "ExcelEdit.hsl"
#include "HSLDeckVisualize.hsl"
#include "HSLExtensions\\File.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "ASWStandardDialogs\\AswStatusDialog.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLSTCCLib.hs_"

namespace SANGER_PIPETTING_CONTROLLER {
  variable t_blnShowSampleReport;
  variable t_strAspReturnValue;
  variable t_strReportPath;
  variable t_blnShowReagentReport;
  variable t_strDispReturnValue;
  variable t_strLiquidClass;
  variable t_strNameForTransfer;
  variable t_strLiquidLevelReturn;
  variable t_intForkID;
  event t_eventWaitForParallel;
  variable t_strDeckLayoutFile;
  variable t_strTipPickUpReturn;
  variable t_strDispReturnValue3;
  variable t_strDispReturnValue4;
  variable t_strAspReturnValue3;
  variable t_strAspReturnValue4;
  variable t_blnMPH96;
  function INIT_InitializeController( device & ML_STAR ) void ;
  function LOAD_ReloadTips( device & ML_STAR ) void ;
  function MPH_AddBaseLine( device & ML_STAR ) void ;
  function MPH_AddDiluent( device & ML_STAR ) void ;
  function MPH_AddRangeSolution( device & ML_STAR ) void ;
  function PIP_AddBaseLine( device & ML_STAR ) void ;
  function PIP_AddDiluent( device & ML_STAR ) void ;
  function PIP_AddRangeSolution( device & ML_STAR ) void ;
  function SEQ_SetPlateSequences( device & ML_STAR, sequence & i_seqPlates ) void ;
  function SEQ_SetReagentChannels( device & ML_STAR, sequence & i_seqReagentBaseLine, sequence & i_seqReagentDiluent, sequence & i_seqReagentRangeSol1, sequence & i_seqReagentRangeSol2, sequence & i_seqReagentRangeSol3 ) void ;
  function SEQ_SetReagentMPH( device & ML_STAR, sequence & i_seqReagentBaseLine, sequence & i_seqReagentDiluent, sequence & i_seqReagentRange ) void ;
  function SEQ_SetTipSequences( device & ML_STAR, sequence & i_seqTips50, sequence & i_seqTips300, sequence & i_seqTips1000, sequence & i_seqTips300Base ) void ;
  private function _Asp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void ;
  private function _ConvertToInteger( variable iVariable, variable & oVariable ) void ;
  private function _Disp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void ;
  private function _GetCarrierAndSiteID( device & Instrument, variable i_strLabwareID, variable & o_str_TemplateID, variable & o_str_TemplateSiteID ) void ;
  private function _GetCarrierTracks( device & Instrument, variable i_strLabwareID, variable & o_int_TotalTracks, variable & o_int_LeftMostTrack, variable & o_int_RightMostTrack ) void ;
  private function _GetContainerDepth( device & Instrument, sequence i_seq_Labware, variable & o_ContainerDepth ) void ;
  private function _GetDoorCloseStatus( device & ML_STAR, variable & o_blnDoorStatus ) void ;
  private function _GetSequenceForPipetting( variable i_strLabID, variable i_intStartPosition, variable i_intTotalPositions, sequence & o_seqPipetting ) void ;
  private function _GetSequenceForPipettingMPH( variable i_strLabID, sequence & o_seqPipetting ) void ;
  private function _GetTemplateOrigin2( device & Instrument, variable i_str_TemplateLabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void ;
  private function _GetTipDescription( variable i_intTipType, variable & o_strTipName ) void ;
  private function _HandleAspirationError( device & ML_STAR, variable i_fltFixedHeightDispense, sequence i_seqDispenseBackLocation ) void ;
  private function _HandleAspirationErrorMPH96( device & ML_STAR, variable i_strReturnFromPickUp, variable i_strReturnFromAspiration, variable i_fltFixedHeightDispense, sequence i_seqDispenseBackLocation ) void ;
  private function _LockDoor( device & ML_STAR ) void ;
  private function _Lookup( variable & array[], variable item ) variable ;
  private function _MakePlateBlink( device & ML_STAR, variable i_strLabID ) void ;
  private function _ParallelReport( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidLevelReturnValue, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void ;
  private function _ParallelReportMPH96( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_TipPickUpValue3, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void ;
  private function _PickUpTips( device & ML_STAR, variable i_intTipType ) void ;
  private function _PickUpTipsMPH96( device & ML_STAR, variable i_intTipType ) variable ;
  private function _Recovery_Codes( variable i_int_RecoveryUsed, variable & o_str_RecoveryUsed ) void ;
  private function _Report( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidLevelReturnValue, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void ;
  private function _ReportMPH96( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_PickupReturnValue3, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void ;
  private function _ReportStarter(  ) void ;
  private function _UnlockDoor( device & ML_STAR ) void ;
  private function _UpdateStatus( variable i_strText, variable i_blnIndentText ) void ;
  private function _WaitForReport(  ) void ;
  function _InitLibrary() {
    CONFIGURATIONEDITOR::_InitLibrary();
    STAR_CHANNEL_TOOLS::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
    STAR_MPH96_TOOLS::_InitLibrary();
    LPQ::_InitLibrary();
  }
  function _ExitLibrary() {
    CONFIGURATIONEDITOR::_ExitLibrary();
    STAR_CHANNEL_TOOLS::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
    STAR_MPH96_TOOLS::_ExitLibrary();
    LPQ::_ExitLibrary();
  }

  function SEQ_SetTipSequences( device & ML_STAR, sequence & i_seqTips50, sequence & i_seqTips300, sequence & i_seqTips1000, sequence & i_seqTips300Base ) void {
    private variable l_strTipSizeSelected;
    private variable l_intTipType50;
    private variable l_intTipType300;
    private variable l_intTipType1000;
    private variable l_intTotalChannelsUsed;
    private variable l_intTotalReplicates;
    private variable l_intTotalTipsRange;
    private variable l_intTotalTipsDiluent;
    private variable l_intTotalTipsBase;
    private variable l_intTotalTipsReagent;
    private variable l_strTipRangeMask;
    private variable l_strTipReagentMask;
    private variable l_arrLabIDs[];
    private variable l_intTotalLabIDs;
    private variable l_intIndex;
    private variable l_arrRangeSolutions[];
    private variable l_intTotalRangeSolutions;
    private variable l_intTotalVolumes;
    private variable l_arrVolumes[];
    private sequence l_seqRemoveLabware;
    private variable l_strFunctionName;
    private variable l_fltDiluent;
    private variable l_intTipsPerDiluent;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Tip"), l_strTipSizeSelected);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Tip Counter"), DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_SAMPLES);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Volume"), Translate("f"), l_arrVolumes, l_intTotalVolumes);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Diluent"), l_fltDiluent);
    if (DATA_CONTROLLER::BLN::TIPS_NONFILTER == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Mask"), l_strTipRangeMask);
    }
    if (DATA_CONTROLLER::BLN::TIPS_FILTER == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Mask Filter"), l_strTipRangeMask);
    }
    if (DATA_CONTROLLER::BLN::TIPS_STERILE == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Mask Sterile"), l_strTipRangeMask);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Solution"), Translate("s"), l_arrRangeSolutions, l_intTotalRangeSolutions);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalRangeSolutions = 1;
    }
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Diluent"), l_fltDiluent);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Tip Counter"), DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_300BASE);
    if (DATA_CONTROLLER::BLN::TIPS_NONFILTER == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Mask"), l_strTipReagentMask);
    }
    if (DATA_CONTROLLER::BLN::TIPS_FILTER == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Mask Filter"), l_strTipReagentMask);
    }
    if (DATA_CONTROLLER::BLN::TIPS_STERILE == ASWGLOBAL::BOOL::TRUE)
    {
      CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Mask Sterile"), l_strTipReagentMask);
    }
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Replicates"), l_intTotalReplicates);
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalChannelsUsed = StrReplace(DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN, Translate("1"), Translate("1"));
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalChannelsUsed = 96;
      if (DATA_CONTROLLER::BLN::OVERIDE_REPLICATES == ASWGLOBAL::BOOL::TRUE)
      {
        l_intTotalReplicates = DATA_CONTROLLER::INT::REPLICATE_NUMBER;
      }
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Total Channels:  "), l_intTotalChannelsUsed, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Replicates:  "), l_intTotalReplicates, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Total Volumes:  "), l_intTotalVolumes, Translate(""));
    l_intTotalTipsRange = 0;
    l_intTotalTipsDiluent = 0;
    if (DATA_CONTROLLER::PROCESS::SETUP_RANGE == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalTipsRange = l_intTotalChannelsUsed * l_intTotalReplicates;
      if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::TRUE)
      {
        l_intTotalTipsRange = l_intTotalTipsRange * l_intTotalVolumes;
      }
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_DILUENT == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTipsPerDiluent = 1;
      if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
      {
        if (DATA_CONTROLLER::FLT::SELECTED_RANGE_VOLUME >= l_fltDiluent)
        {
          l_intTipsPerDiluent = 0;
          DATA_CONTROLLER::PROCESS::SETUP_DILUENT = ASWGLOBAL::BOOL::FALSE;
        }
      }
      l_intTotalTipsDiluent = l_intTotalChannelsUsed * l_intTipsPerDiluent;
    }
    if (DATA_CONTROLLER::PROCESS::PREPARE_VERIFICATION_PLATE == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalTipsBase = l_intTotalChannelsUsed * 1;
    }
    else
    {
      l_intTotalTipsBase = 0;
    }
    l_intTotalTipsReagent = l_intTotalTipsDiluent + l_intTotalTipsBase;
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Total tips needed for reagent addition:  "), l_intTotalTipsReagent, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Total tips needed for range addition:  "), l_intTotalTipsRange, Translate(""));
    DATA_CONTROLLER::INT::TIPS_NEEDED_REAGENT = DATA_CONTROLLER::INT::TIPS_NEEDED_REAGENT + l_intTotalTipsReagent;
    DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE = DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE + l_intTotalTipsRange;
    l_intTipType50 = StrReplace(l_strTipSizeSelected, Translate("50"), Translate("50"));
    l_intTipType300 = StrReplace(l_strTipSizeSelected, Translate("300"), Translate("300"));
    l_intTipType1000 = StrReplace(l_strTipSizeSelected, Translate("1000"), Translate("1000"));
    SeqRemoveAll(l_seqRemoveLabware);
    if (l_intTipType50 == 1)
    {
      SeqCopySequence(DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, i_seqTips50);
      l_seqRemoveLabware = HSLExtensions::Sequence::Concat(i_seqTips300, i_seqTips1000, ASWGLOBAL::BOOL::TRUE);
    }
    if (l_intTipType300 == 1)
    {
      SeqCopySequence(DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, i_seqTips300);
      l_seqRemoveLabware = HSLExtensions::Sequence::Concat(i_seqTips50, i_seqTips1000, ASWGLOBAL::BOOL::TRUE);
    }
    if (l_intTipType1000 == 1)
    {
      SeqCopySequence(DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, i_seqTips1000);
      l_seqRemoveLabware = HSLExtensions::Sequence::Concat(i_seqTips50, i_seqTips300, ASWGLOBAL::BOOL::TRUE);
    }
    SeqGetLabwareIds(l_seqRemoveLabware, l_arrLabIDs);
    l_intTotalLabIDs=l_arrLabIDs.GetSize();
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalLabIDs;)
      {
        l_intIndex = l_intIndex + 1;
        DevRemoveLabware(ML_STAR, l_arrLabIDs.ElementAt( l_intIndex -1));
      }
    }
    SeqCopySequence(DATA_CONTROLLER::SEQ::TIPS_300BASE, i_seqTips300Base);
    SeqGetLabwareIds(DATA_CONTROLLER::SEQ::TIPS_300BASE, l_arrLabIDs);
    l_intTotalLabIDs=l_arrLabIDs.GetSize();
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalLabIDs;)
      {
        l_intIndex = l_intIndex + 1;
        DevSetBarcodeData(ML_STAR, l_arrLabIDs.ElementAt( l_intIndex -1), Translate(""), l_strTipReagentMask);
      }
    }
    SeqGetLabwareIds(DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, l_arrLabIDs);
    l_intTotalLabIDs=l_arrLabIDs.GetSize();
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalLabIDs;)
      {
        l_intIndex = l_intIndex + 1;
        DevSetBarcodeData(ML_STAR, l_arrLabIDs.ElementAt( l_intIndex -1), Translate(""), l_strTipRangeMask);
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function INIT_InitializeController( device & ML_STAR ) void {
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    DATA_CONTROLLER::INIT::LockLibrary();
    t_intForkID = 0;
    if( 0 == t_eventWaitForParallel.SetEvent() )
    {
          MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _ParallelReport(ML_STAR, DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate(""), Translate(""), Translate(""), Translate(""), ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, Translate(""));
    _WaitForReport();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function SEQ_SetReagentChannels( device & ML_STAR, sequence & i_seqReagentBaseLine, sequence & i_seqReagentDiluent, sequence & i_seqReagentRangeSol1, sequence & i_seqReagentRangeSol2, sequence & i_seqReagentRangeSol3 ) void {
    private variable l_intTotalRangeSolutions;
    private variable l_arrRangeSolutions[];
    private variable l_strFunctionName;
    private variable l_strLabID;
    private variable l_strRangeDescription;
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Solution"), Translate("s"), l_arrRangeSolutions, l_intTotalRangeSolutions);
    if(0){
      SeqCopySequence(DATA_CONTROLLER::SEQ::REAGENT_BASELINE, i_seqReagentBaseLine);
    }
    l_strLabID = SeqGetLabwareId(i_seqReagentBaseLine);
    LPQ::ADJUST_ChangeLabwareID(ML_STAR, l_strLabID, Translate("BASELINE"));
    LPQ::SEQ_GetDefaultSequence(ML_STAR, Translate("BASELINE"), 1, DATA_CONTROLLER::SEQ::REAGENT_BASELINE);
    STCC::SetElementBarcodeForSequencePos(ML_STAR, DATA_CONTROLLER::SEQ::REAGENT_BASELINE, -1, hslTrue, "BASELINE SOLUTION");
    if(0){
      SeqCopySequence(DATA_CONTROLLER::SEQ::REAGENT_DILUENT, i_seqReagentDiluent);
    }
    l_strLabID = SeqGetLabwareId(i_seqReagentDiluent);
    LPQ::ADJUST_ChangeLabwareID(ML_STAR, l_strLabID, Translate("DILUENT"));
    LPQ::SEQ_GetDefaultSequence(ML_STAR, Translate("DILUENT"), 1, DATA_CONTROLLER::SEQ::REAGENT_DILUENT);
    STCC::SetElementBarcodeForSequencePos(ML_STAR, DATA_CONTROLLER::SEQ::REAGENT_DILUENT, -1, hslTrue, "DILUENT");
    if (l_intTotalRangeSolutions >= 1)
    {
      if(0){
        SeqCopySequence(DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION1, i_seqReagentRangeSol1);
      }
      l_strLabID = SeqGetLabwareId(i_seqReagentRangeSol1);
      l_strRangeDescription = StrConcat2(Translate("RANGE_"), l_arrRangeSolutions.ElementAt( 1 -1));
      LPQ::ADJUST_ChangeLabwareID(ML_STAR, l_strLabID, l_strRangeDescription);
      LPQ::SEQ_GetDefaultSequence(ML_STAR, l_strRangeDescription, 1, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION1);
      Util2::VarArrCheckIndex(l_arrRangeSolutions, 1, "l_arrRangeSolutions");
      STCC::SetElementBarcodeForSequencePos(ML_STAR, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION1, -1, hslTrue, l_arrRangeSolutions.ElementAt(1-1));
    }
    if (l_intTotalRangeSolutions >= 2)
    {
      if(0){
        SeqCopySequence(DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION2, i_seqReagentRangeSol2);
      }
      l_strLabID = SeqGetLabwareId(i_seqReagentRangeSol2);
      l_strRangeDescription = StrConcat2(Translate("RANGE_"), l_arrRangeSolutions.ElementAt( 2 -1));
      LPQ::ADJUST_ChangeLabwareID(ML_STAR, l_strLabID, l_strRangeDescription);
      LPQ::SEQ_GetDefaultSequence(ML_STAR, l_strRangeDescription, 1, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION2);
      Util2::VarArrCheckIndex(l_arrRangeSolutions, 2, "l_arrRangeSolutions");
      STCC::SetElementBarcodeForSequencePos(ML_STAR, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION2, -1, hslTrue, l_arrRangeSolutions.ElementAt(2-1));
    }
    if (l_intTotalRangeSolutions >= 3)
    {
      if(0){
        SeqCopySequence(DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION3, i_seqReagentRangeSol3);
      }
      l_strLabID = SeqGetLabwareId(i_seqReagentRangeSol3);
      l_strRangeDescription = StrConcat2(Translate("RANGE_"), l_arrRangeSolutions.ElementAt( 3 -1));
      LPQ::ADJUST_ChangeLabwareID(ML_STAR, l_strLabID, l_strRangeDescription);
      LPQ::SEQ_GetDefaultSequence(ML_STAR, l_strRangeDescription, 1, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION3);
      Util2::VarArrCheckIndex(l_arrRangeSolutions, 3, "l_arrRangeSolutions");
      STCC::SetElementBarcodeForSequencePos(ML_STAR, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION3, -1, hslTrue, l_arrRangeSolutions.ElementAt(3-1));
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function SEQ_SetReagentMPH( device & ML_STAR, sequence & i_seqReagentBaseLine, sequence & i_seqReagentDiluent, sequence & i_seqReagentRange ) void {
    private variable l_strFunctionName;
    private variable l_strLabID;
    private variable l_strRangeDescription;
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    if(0){
      SeqCopySequence(DATA_CONTROLLER::SEQ::REAGENT_BASELINE, i_seqReagentBaseLine);
    }
    l_strLabID = SeqGetLabwareId(i_seqReagentBaseLine);
    LPQ::ADJUST_ChangeLabwareID(ML_STAR, l_strLabID, Translate("BASELINE"));
    LPQ::SEQ_GetDefaultSequence(ML_STAR, Translate("BASELINE"), 1, DATA_CONTROLLER::SEQ::REAGENT_BASELINE);
    STCC::SetElementBarcodeForSequencePos(ML_STAR, DATA_CONTROLLER::SEQ::REAGENT_BASELINE, -1, hslTrue, "BASELINE SOLUTION");
    if(0){
      SeqCopySequence(DATA_CONTROLLER::SEQ::REAGENT_DILUENT, i_seqReagentDiluent);
    }
    l_strLabID = SeqGetLabwareId(i_seqReagentDiluent);
    LPQ::ADJUST_ChangeLabwareID(ML_STAR, l_strLabID, Translate("DILUENT"));
    LPQ::SEQ_GetDefaultSequence(ML_STAR, Translate("DILUENT"), 1, DATA_CONTROLLER::SEQ::REAGENT_DILUENT);
    STCC::SetElementBarcodeForSequencePos(ML_STAR, DATA_CONTROLLER::SEQ::REAGENT_DILUENT, -1, hslTrue, "DILUENT");
    if(0){
      SeqCopySequence(DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION1, i_seqReagentRange);
    }
    l_strLabID = SeqGetLabwareId(i_seqReagentRange);
    l_strRangeDescription = StrConcat2(Translate("RANGE_"), DATA_CONTROLLER::STR::SELECTED_RANGE_SOLUTION);
    LPQ::ADJUST_ChangeLabwareID(ML_STAR, l_strLabID, l_strRangeDescription);
    LPQ::SEQ_GetDefaultSequence(ML_STAR, l_strRangeDescription, 1, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION1);
    STCC::SetElementBarcodeForSequencePos(ML_STAR, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION1, -1, hslTrue, DATA_CONTROLLER::STR::SELECTED_RANGE_SOLUTION);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function PIP_AddDiluent( device & ML_STAR ) void {
    private variable l_fltDispenseHeight;
    private variable l_strLabID;
    private sequence l_seqPipettingPositions;
    private variable l_strLiquidClass;
    private variable l_fltDiluent;
    private variable l_strLiquidLevel;
    private variable l_fltLiquidHeight;
    private variable l_intTotalVolumes;
    private variable l_arrRangeVolumes[];
    private variable l_intIndex;
    private variable l_fltVolumeRange;
    private variable l_fltDiluentToAdd;
    private variable l_intTotalChannels;
    private variable l_intReplicates;
    private variable l_intWellsPerRange;
    private variable l_intPositionStart;
    private variable l_intCurrentPosition;
    private variable l_strReturnAsp;
    private variable l_strReturnDsp;
    private variable l_strFunctionName;
    private variable l_intVolume;
    private variable l_strVolumeDescription;
    private variable l_strReagentDescription;
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_DILUENT == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("LiquidClassDiluent"), l_strLiquidClass);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Diluent"), l_fltDiluent);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Replicates"), l_intReplicates);
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Volume"), Translate("f"), l_arrRangeVolumes, l_intTotalVolumes);
    _GetContainerDepth(ML_STAR, DATA_CONTROLLER::SEQ::PLATES, l_fltDispenseHeight);
    l_fltDispenseHeight = l_fltDispenseHeight - 3.0;
    l_intTotalChannels = StrReplace(DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN, Translate("1"), Translate("1"));
    l_intWellsPerRange = l_intTotalChannels * l_intReplicates;
    l_intVolume = MthCeiling(l_fltDiluentToAdd);
    l_strVolumeDescription = StrConcat2(l_intVolume, Translate(" µL"));
    l_strReagentDescription = StrConcat4(Translate("Add diluent"), Translate(""), Translate("..."), Translate(""));
    _UpdateStatus(l_strReagentDescription, ASWGLOBAL::BOOL::FALSE);
    _PickUpTips(ML_STAR, 0);
    _UpdateStatus(Translate("Pre-wet tips"), ASWGLOBAL::BOOL::TRUE);
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        onerror goto errLabel_1 ;
        err.Clear();
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	l_strLiquidLevel = arrRetValues[2];
        }
        STAR_CHANNEL_TOOLS::LIQUID_LEVEL_GetLiquidLevelHeight(ML_STAR, l_strLiquidLevel, DATA_CONTROLLER::SEQ::REAGENT_DILUENT, 1, l_fltLiquidHeight);
        l_fltLiquidHeight = l_fltLiquidHeight + 5.0;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        break;
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          _HandleAspirationError(ML_STAR, -1, DATA_CONTROLLER::SEQ::REAGENT_DILUENT);
        }   /* end if from skip handler if no error */
      }
    }
    l_intPositionStart = 1;
    l_intCurrentPosition = DATA_CONTROLLER::SEQ::PLATES.GetCurrentPosition();
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalVolumes;)
      {
        l_intIndex = l_intIndex + 1;
        l_fltVolumeRange=l_arrRangeVolumes.GetAt(l_intIndex-1);
        l_fltDiluentToAdd = l_fltDiluent - l_fltVolumeRange;
        l_strLabID = SeqGetLabwareId(DATA_CONTROLLER::SEQ::PLATES);
        SeqIncrement(DATA_CONTROLLER::SEQ::PLATES, l_intWellsPerRange);
        _GetSequenceForPipetting(l_strLabID, l_intPositionStart, l_intWellsPerRange, l_seqPipettingPositions);
        l_intPositionStart = l_intPositionStart + l_intWellsPerRange;
        if (l_intPositionStart > 96)
        {
          l_intPositionStart = 1;
        }
        l_intVolume = MthCeiling(l_fltDiluentToAdd);
        l_strVolumeDescription = StrConcat2(l_intVolume, Translate(" µL"));
        l_strReagentDescription = StrConcat4(Translate("Add diluent"), Translate(" "), l_strVolumeDescription, Translate(""));
        if (l_fltDiluentToAdd > 0.0)
        {
          _UpdateStatus(l_strReagentDescription, ASWGLOBAL::BOOL::TRUE);
        }
        {
          while (
             (l_seqPipettingPositions.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, DATA_CONTROLLER::SEQ::REAGENT_DILUENT, 1, l_seqPipettingPositions, 1);
            if (l_fltDiluentToAdd <= 0.0)
            {
              break;
            }
            {
              while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
              {
                onerror goto errLabel_2 ;
                err.Clear();
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strReturnAsp = arrRetValues[2];
                }
                break;
                errLabel_2 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  _HandleAspirationError(ML_STAR, -1, DATA_CONTROLLER::SEQ::REAGENT_DILUENT);
                }   /* end if from skip handler if no error */
              }
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
              	l_strLiquidLevel = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	l_strReturnDsp = arrRetValues[2];
            }
            _ParallelReport(ML_STAR, DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, l_strReturnAsp, l_strReturnDsp, l_strLiquidLevel, l_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, Translate("Diluent"));
            if (
               (l_seqPipettingPositions.GetCurrentPosition() > 0 && l_seqPipettingPositions.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          DATA_CONTROLLER::SEQ::REAGENT_DILUENT.SetMax(DATA_CONTROLLER::SEQ::REAGENT_DILUENT.GetTotal());
          l_seqPipettingPositions.SetMax(l_seqPipettingPositions.GetTotal());
          l_seqPipettingPositions.SetCurrentPosition(1);
        }
      }
    }
    DATA_CONTROLLER::SEQ::PLATES.SetCurrentPosition(l_intCurrentPosition);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function SEQ_SetPlateSequences( device & ML_STAR, sequence & i_seqPlates ) void {
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    SeqCopySequence(DATA_CONTROLLER::SEQ::PLATES, i_seqPlates);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  private function _GetContainerDepth( device & Instrument, sequence i_seq_Labware, variable & o_ContainerDepth ) void {
    private variable flt_Z_Bottom;
    private variable flt_NotUsed;
    private variable str_LabID;
    private variable str_PosID;
    o_ContainerDepth = 0;
    str_LabID = SeqGetLabwareId(i_seq_Labware);
    str_PosID = SeqGetPositionId(i_seq_Labware);
    o_ContainerDepth = 0;
    DevGetLabwarePositionEx(Instrument, str_LabID, str_PosID, flt_NotUsed, flt_NotUsed, flt_Z_Bottom, flt_NotUsed);
    {
      object rack;
      object ctr;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = Instrument.GetDeckLayoutObject();
      //labwareId = SeqGetLabwareId(i_sequenceLabware);
      labware = m_decklayout.Labware(str_LabID);
      labware.GetObject2("{3E5213CF-57C9-4911-B33E-05E77130E4DB}", rack); //  IEditLabware6
      rack.CntrAtPosition(ctr,str_PosID);
      o_ContainerDepth = ctr.Depth;
      //o_ContainerClearanceHeight = ctr.Clearance;
      rack.ReleaseObject();
      ctr.ReleaseObject();
      labware.ReleaseObject();
      m_decklayout.ReleaseObject();
    }
    o_ContainerDepth = MthRound(o_ContainerDepth, 1);
  }

  private function _GetSequenceForPipetting( variable i_strLabID, variable i_intStartPosition, variable i_intTotalPositions, sequence & o_seqPipetting ) void {
    private variable l_intTotalChannels;
    private variable l_intTotalPositions;
    private variable l_arrPositionIDs[];
    private variable l_intIndex;
    private variable l_intEndPosition;
    { sequence __temp; o_seqPipetting = __temp; }
    SeqRemoveAll(o_seqPipetting);
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    l_intTotalChannels = StrReplace(DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN, Translate("1"), Translate("1"));
    if (l_intTotalChannels == 8)
    {
      CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Sequence8Channel"), Translate("s"), l_arrPositionIDs, l_intTotalPositions);
    }
    else
    {
      CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Sequence4Channel"), Translate("s"), l_arrPositionIDs, l_intTotalPositions);
    }
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalPositions;)
      {
        l_intIndex = l_intIndex + 1;
        SeqAdd(o_seqPipetting, i_strLabID, l_arrPositionIDs.ElementAt( l_intIndex -1));
      }
    }
    l_intEndPosition = i_intStartPosition + i_intTotalPositions;
    l_intEndPosition = l_intEndPosition - 1;
    o_seqPipetting.SetCurrentPosition(i_intStartPosition);
    o_seqPipetting.SetCount(l_intEndPosition);
  }

  private function _PickUpTips( device & ML_STAR, variable i_intTipType ) void {
    LOAD_ReloadTips(ML_STAR);
    if (i_intTipType == 0)
    {
      STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_300BASE, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_300BASE, DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_300BASE, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_300BASE);
    }
    else
    {
      STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_SAMPLES, DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_SAMPLES);
    }
  }

  function PIP_AddBaseLine( device & ML_STAR ) void {
    private variable l_fltLiquidHeight;
    private variable l_intTotalChannels;
    private variable l_strLiquidLevel;
    private variable l_intWellsPerRange;
    private variable l_intPositionStart;
    private variable l_fltDispenseHeight;
    private variable l_strLabID;
    private variable l_strLiquidClass;
    private sequence l_seqPipettingPositions;
    private variable l_fltBase;
    private variable l_strReturnAsp;
    private variable l_strReturnDsp;
    private variable l_strFunctionName;
    private variable l_strCurrentDay;
    private variable l_intVolume;
    private variable l_strVolumeDescription;
    private variable l_strReagentDescription;
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    if (DATA_CONTROLLER::PROCESS::PREPARE_VERIFICATION_PLATE == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("LiquidClassBaseline"), l_strLiquidClass);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Base"), l_fltBase);
    _GetContainerDepth(ML_STAR, DATA_CONTROLLER::SEQ::PLATES, l_fltDispenseHeight);
    l_fltDispenseHeight = l_fltDispenseHeight - 3.0;
    l_intTotalChannels = StrReplace(DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN, Translate("1"), Translate("1"));
    l_intWellsPerRange = 96;
    l_intVolume = MthCeiling(l_fltBase);
    l_strVolumeDescription = StrConcat2(l_intVolume, Translate(" µL"));
    l_strReagentDescription = StrConcat4(Translate("Add baseline reagent "), l_strVolumeDescription, Translate("..."), Translate(""));
    _UpdateStatus(l_strReagentDescription, ASWGLOBAL::BOOL::FALSE);
    _PickUpTips(ML_STAR, 0);
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        onerror goto errLabel_3 ;
        err.Clear();
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	l_strLiquidLevel = arrRetValues[2];
        }
        STAR_CHANNEL_TOOLS::LIQUID_LEVEL_GetLiquidLevelHeight(ML_STAR, l_strLiquidLevel, DATA_CONTROLLER::SEQ::REAGENT_BASELINE, 1, l_fltLiquidHeight);
        l_fltLiquidHeight = l_fltLiquidHeight + 5.0;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        break;
        errLabel_3 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          _HandleAspirationError(ML_STAR, -1, DATA_CONTROLLER::SEQ::REAGENT_BASELINE);
        }   /* end if from skip handler if no error */
      }
    }
    l_strLabID = SeqGetLabwareId(DATA_CONTROLLER::SEQ::PLATES);
    SeqIncrement(DATA_CONTROLLER::SEQ::PLATES, 96);
    l_intPositionStart = 1;
    _GetSequenceForPipetting(l_strLabID, l_intPositionStart, l_intWellsPerRange, l_seqPipettingPositions);
    {
      while (
         (l_seqPipettingPositions.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, DATA_CONTROLLER::SEQ::REAGENT_BASELINE, 1, l_seqPipettingPositions, 1);
        {
          while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
          {
            onerror goto errLabel_4 ;
            err.Clear();
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	l_strReturnAsp = arrRetValues[2];
            }
            break;
            errLabel_4 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _HandleAspirationError(ML_STAR, -1, DATA_CONTROLLER::SEQ::REAGENT_BASELINE);
            }   /* end if from skip handler if no error */
          }
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	l_strLiquidLevel = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	l_strReturnDsp = arrRetValues[2];
        }
        _ParallelReport(ML_STAR, DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, l_strReturnAsp, l_strReturnDsp, l_strLiquidLevel, l_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, Translate("Baseline"));
        if (
           (l_seqPipettingPositions.GetCurrentPosition() > 0 && l_seqPipettingPositions.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      DATA_CONTROLLER::SEQ::REAGENT_BASELINE.SetMax(DATA_CONTROLLER::SEQ::REAGENT_BASELINE.GetTotal());
      l_seqPipettingPositions.SetMax(l_seqPipettingPositions.GetTotal());
      l_seqPipettingPositions.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    l_strLabID = SeqGetLabwareId(l_seqPipettingPositions);
    _MakePlateBlink(ML_STAR, l_strLabID);
    l_strCurrentDay = TimGetFormattedDate(Translate("%m/%d/%Y"));
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigRunSelections"));
    CONFIGURATIONEDITOR::SetConfigurationValue(Translate("DateBaseline"), l_strCurrentDay, ASWGLOBAL::BOOL::FALSE);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function PIP_AddRangeSolution( device & ML_STAR ) void {
    private variable l_intTotalChannels;
    private variable l_strLiquidLevel;
    private variable l_intIndex;
    private variable l_intTotalVolumes;
    private variable l_fltDiluent;
    private variable l_intWellsPerRange;
    private variable l_intCurrentPosition;
    private variable l_intReplicates;
    private variable l_intPositionStart;
    private variable l_intTotalLiquidClasses;
    private variable l_strLabID;
    private variable l_strLiquidClass;
    private variable l_fltVolumeRange;
    private sequence l_seqPipettingPositions;
    private variable l_arrLiquidClasses[];
    private variable l_arrRangeVolumes[];
    private sequence l_arrReagentSource[];
    private variable l_intReagentIndex;
    private variable l_strReturnAsp;
    private variable l_strReturnDsp;
    private variable l_intTotalSolutions;
    private variable l_arrSolutions[];
    private variable l_strRangeSolution;
    private variable l_strDescription;
    private variable l_strFunctionName;
    private variable l_strLabIDCheck;
    private variable l_intVolume;
    private variable l_strVolumeDescription;
    private variable l_strReagentDescription;
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_RANGE == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    l_arrReagentSource.SetSize(0);
    l_arrReagentSource.AddAsLast(DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION1);
    l_arrReagentSource.AddAsLast(DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION2);
    l_arrReagentSource.AddAsLast(DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION3);
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Diluent"), l_fltDiluent);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Replicates"), l_intReplicates);
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Volume"), Translate("f"), l_arrRangeVolumes, l_intTotalVolumes);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("LiquidClass"), Translate("s"), l_arrLiquidClasses, l_intTotalLiquidClasses);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Solution"), Translate("s"), l_arrSolutions, l_intTotalSolutions);
    l_intTotalChannels = StrReplace(DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN, Translate("1"), Translate("1"));
    l_intWellsPerRange = l_intTotalChannels * l_intReplicates;
    l_intPositionStart = 1;
    l_intCurrentPosition = DATA_CONTROLLER::SEQ::PLATES.GetCurrentPosition();
    l_strLabIDCheck = Translate("");
    _UpdateStatus(Translate("Add Range solution to all wells..."), ASWGLOBAL::BOOL::FALSE);
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalLiquidClasses;)
      {
        l_intIndex = l_intIndex + 1;
        l_fltVolumeRange=l_arrRangeVolumes.GetAt(l_intIndex-1);
        l_strLiquidClass=l_arrLiquidClasses.GetAt(l_intIndex-1);
        l_strRangeSolution=l_arrSolutions.GetAt(l_intIndex-1);
        l_strDescription = StrConcat4(Translate("Range "), l_strRangeSolution, Translate(""), Translate(""));
        l_strLabID = SeqGetLabwareId(DATA_CONTROLLER::SEQ::PLATES);
        SeqIncrement(DATA_CONTROLLER::SEQ::PLATES, l_intWellsPerRange);
        _GetSequenceForPipetting(l_strLabID, l_intPositionStart, l_intWellsPerRange, l_seqPipettingPositions);
        l_intPositionStart = l_intPositionStart + l_intWellsPerRange;
        if (l_intPositionStart > 96)
        {
          l_intPositionStart = 1;
        }
        if (l_strLabIDCheck == "")
        {
          l_strLabIDCheck = l_strLabID;
        }
        if (l_strLabIDCheck != l_strLabID)
        {
          _MakePlateBlink(ML_STAR, l_strLabIDCheck);
        }
        l_intVolume = MthCeiling(l_fltVolumeRange);
        l_strVolumeDescription = StrConcat2(l_intVolume, Translate(" µL"));
        l_strReagentDescription = StrConcat4(Translate("Add "), l_strDescription, Translate(" "), l_strVolumeDescription);
        _UpdateStatus(l_strReagentDescription, ASWGLOBAL::BOOL::TRUE);
        {
          l_intReagentIndex = 0;
          while (
             (l_seqPipettingPositions.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, DATA_CONTROLLER::SEQ::REAGENT_DILUENT, 1, l_seqPipettingPositions, 1);
            l_intReagentIndex = l_intReagentIndex + 1;
            {
              while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
              {
                _PickUpTips(ML_STAR, 1);
                onerror goto errLabel_5 ;
                err.Clear();
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strReturnAsp = arrRetValues[2];
                }
                break;
                errLabel_5 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  _HandleAspirationError(ML_STAR, -1, l_arrReagentSource.ElementAt( l_intIndex -1));
                  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                }   /* end if from skip handler if no error */
              }
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
              	l_strLiquidLevel = arrRetValues[2];
            }
            if (l_fltVolumeRange >= l_fltDiluent)
            {
              ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strReturnDsp = arrRetValues[2];
              }
              ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strReturnDsp = arrRetValues[2];
              }
            }
            _ParallelReport(ML_STAR, DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, l_strReturnAsp, l_strReturnDsp, l_strLiquidLevel, l_strLiquidClass, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, l_strDescription);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (l_seqPipettingPositions.GetCurrentPosition() > 0 && l_seqPipettingPositions.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          DATA_CONTROLLER::SEQ::REAGENT_DILUENT.SetMax(DATA_CONTROLLER::SEQ::REAGENT_DILUENT.GetTotal());
          l_seqPipettingPositions.SetMax(l_seqPipettingPositions.GetTotal());
          l_seqPipettingPositions.SetCurrentPosition(1);
        }
        l_strLabIDCheck = SeqGetLabwareId(l_seqPipettingPositions);
      }
    }
    _MakePlateBlink(ML_STAR, l_strLabIDCheck);
    DATA_CONTROLLER::SEQ::PLATES.SetCurrentPosition(l_intCurrentPosition);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  private function _PickUpTipsMPH96( device & ML_STAR, variable i_intTipType ) variable {
    private variable l_strReturn;
    LOAD_ReloadTips(ML_STAR);
    if (i_intTipType == 0)
    {
      l_strReturn = STAR_MPH96_TOOLS::TOOL_PickUpNextMPH96Tips(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_300BASE, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_300BASE);
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_300BASE, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_300BASE);
    }
    else
    {
      l_strReturn = STAR_MPH96_TOOLS::TOOL_PickUpNextMPH96Tips(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_SAMPLES);
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_SAMPLES);
    }
    return (l_strReturn);
  }

  function MPH_AddDiluent( device & ML_STAR ) void {
    private variable l_fltLiquidHeight;
    private variable l_strReturn3Pip;
    private variable l_intWellsPerRange;
    private variable l_strReturn3Tip;
    private variable l_intPositionStart;
    private variable l_fltDispenseHeight;
    private variable l_strLabID;
    private variable l_strLiquidClass;
    private sequence l_seqPipettingPositions;
    private variable l_fltDiluent;
    private variable l_intIndex;
    private variable l_fltDiluentToAdd;
    private variable l_intReplicates;
    private variable l_intCurrentPosition;
    private variable l_strReturn4Pip;
    private variable l_strReturn3Disp;
    private variable l_strReturn4Disp;
    private variable l_strFunctionName;
    private variable l_strPlateDescription;
    private variable l_intVolume;
    private variable l_strVolumeDescription;
    private variable l_strReagentDescription;
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_DILUENT == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("LiquidClassDiluentMPH"), l_strLiquidClass);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("MPHDiluent"), l_fltDiluent);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Replicates"), l_intReplicates);
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    if (DATA_CONTROLLER::BLN::OVERIDE_REPLICATES == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReplicates = DATA_CONTROLLER::INT::REPLICATE_NUMBER;
    }
    _GetContainerDepth(ML_STAR, DATA_CONTROLLER::SEQ::PLATES, l_fltDispenseHeight);
    l_fltDispenseHeight = l_fltDispenseHeight - 3.0;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~ l_fltDispenseHeight = "), l_fltDispenseHeight);
    l_intWellsPerRange = 96;
    l_fltDiluentToAdd = l_fltDiluent - DATA_CONTROLLER::FLT::SELECTED_RANGE_VOLUME;
    if (l_fltDiluentToAdd <= 0.0)
    {
      MECC::TraceComment(Translate("NO DILUENT REQUIRED!"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
    l_intVolume = MthCeiling(l_fltDiluentToAdd);
    l_strVolumeDescription = StrConcat2(l_intVolume, Translate(" µL"));
    l_strReagentDescription = StrConcat4(Translate("Add diluent "), l_strVolumeDescription, Translate("..."), Translate(""));
    _UpdateStatus(l_strReagentDescription, ASWGLOBAL::BOOL::FALSE);
    l_strReturn3Tip = _PickUpTipsMPH96(ML_STAR, 0);
    _UpdateStatus(Translate("Pre-wet tips"), ASWGLOBAL::BOOL::TRUE);
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        onerror goto errLabel_6 ;
        err.Clear();
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          	l_strReturn3Pip = arrRetValues[2];
        }
        STAR_MPH96_TOOLS::TOOL_GetLiquidLevelHeight(ML_STAR, l_strReturn3Tip, l_strReturn3Pip, l_fltLiquidHeight);
        l_fltLiquidHeight = l_fltLiquidHeight + 5.0;
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        break;
        errLabel_6 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          _HandleAspirationErrorMPH96(ML_STAR, l_strReturn3Pip, l_strReturn3Tip, -1, DATA_CONTROLLER::SEQ::REAGENT_DILUENT);
        }   /* end if from skip handler if no error */
      }
    }
    l_intCurrentPosition = DATA_CONTROLLER::SEQ::PLATES.GetCurrentPosition();
    if(0){
      Util2::Debug::TraceSequence(DATA_CONTROLLER::SEQ::PLATES);
    }
    l_strLabID = SeqGetLabwareId(DATA_CONTROLLER::SEQ::PLATES);
    SeqIncrement(DATA_CONTROLLER::SEQ::PLATES, 384);
    l_intPositionStart = 1;
    _GetSequenceForPipettingMPH(l_strLabID, l_seqPipettingPositions);
    {
      for(l_intIndex = 0; l_intIndex < l_intReplicates;)
      {
        l_intIndex = l_intIndex + 1;
        l_strPlateDescription = StrConcat4(Translate("Quadrant "), l_intIndex, Translate(" : "), l_intReplicates);
        _UpdateStatus(l_strPlateDescription, ASWGLOBAL::BOOL::TRUE);
        if (l_fltDiluentToAdd > 0.0)
        {
          {
            while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
            {
              onerror goto errLabel_7 ;
              err.Clear();
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
                	l_strReturn3Pip = arrRetValues[2];
                	l_strReturn4Pip = arrRetValues[3];
              }
              break;
              errLabel_7 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                _HandleAspirationErrorMPH96(ML_STAR, l_strReturn3Pip, l_strReturn3Tip, -1, DATA_CONTROLLER::SEQ::REAGENT_DILUENT);
              }   /* end if from skip handler if no error */
            }
          }
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strReturn3Disp = arrRetValues[2];
            	l_strReturn4Disp = arrRetValues[3];
          }
          _ParallelReportMPH96(ML_STAR, DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, l_strReturn3Pip, l_strReturn4Pip, l_strReturn3Disp, l_strReturn4Disp, l_strReturn3Tip, l_strLiquidClass, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, Translate("Diluent"));
        }
      }
    }
    DATA_CONTROLLER::SEQ::PLATES.SetCurrentPosition(l_intCurrentPosition);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    _WaitForReport();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  function MPH_AddRangeSolution( device & ML_STAR ) void {
    private variable l_strReturn3Pip;
    private variable l_intIndex;
    private variable l_intTotalVolumes;
    private variable l_fltDiluent;
    private variable l_intWellsPerRange;
    private variable l_strReturn3Tip;
    private variable l_intPositionStart;
    private variable l_strLabID;
    private variable l_strLiquidClass;
    private sequence l_seqPipettingPositions;
    private variable l_arrRangeVolumes[];
    private variable l_intTotalLiquidClasses;
    private variable l_arrLiquidClasses[];
    private variable l_intReplicates;
    private variable l_intCurrentPosition;
    private variable l_strReturn4Pip;
    private variable l_strReturn3Disp;
    private variable l_strReturn4Disp;
    private variable l_strDescription;
    private variable l_strFunctionName;
    private variable l_strPlateDescription;
    private variable l_intVolume;
    private variable l_strVolumeDescription;
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_RANGE == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("LiquidClassDiluentMPH"), l_strLiquidClass);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Diluent"), l_fltDiluent);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("Replicates"), l_intReplicates);
    CONFIGURATIONEDITOR::SetConfigurationFile(DATA_CONTROLLER::PROCESS::TIP_CONFIG_NAME);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("Volume"), Translate("f"), l_arrRangeVolumes, l_intTotalVolumes);
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("LiquidClass"), Translate("s"), l_arrLiquidClasses, l_intTotalLiquidClasses);
    if (DATA_CONTROLLER::BLN::OVERIDE_REPLICATES == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReplicates = DATA_CONTROLLER::INT::REPLICATE_NUMBER;
    }
    l_strDescription = StrConcat2(Translate("Range "), DATA_CONTROLLER::STR::SELECTED_RANGE_SOLUTION);
    l_intWellsPerRange = 96;
    l_intCurrentPosition = DATA_CONTROLLER::SEQ::PLATES.GetCurrentPosition();
    l_strLabID = SeqGetLabwareId(DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION1);
    l_intVolume = MthCeiling(DATA_CONTROLLER::FLT::SELECTED_RANGE_VOLUME);
    l_strVolumeDescription = StrConcat2(l_intVolume, Translate(" µL..."));
    l_strPlateDescription = StrConcat4(Translate("Add range "), DATA_CONTROLLER::STR::SELECTED_RANGE_SOLUTION, Translate(" solution "), l_strVolumeDescription);
    StrReplace(l_strPlateDescription, Translate("_"), Translate(" "));
    _UpdateStatus(l_strPlateDescription, ASWGLOBAL::BOOL::FALSE);
    l_strLabID = SeqGetLabwareId(DATA_CONTROLLER::SEQ::PLATES);
    SeqIncrement(DATA_CONTROLLER::SEQ::PLATES, 384);
    l_intPositionStart = 1;
    l_strPlateDescription = StrConcat4(Translate("Plate "), l_intIndex, Translate(" / "), l_intReplicates);
    _UpdateStatus(l_strPlateDescription, ASWGLOBAL::BOOL::TRUE);
    _GetSequenceForPipettingMPH(l_strLabID, l_seqPipettingPositions);
    {
      for(l_intIndex = 0; l_intIndex < l_intReplicates;)
      {
        l_intIndex = l_intIndex + 1;
        {
          while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
          {
            l_strReturn3Tip = _PickUpTipsMPH96(ML_STAR, 1);
            onerror goto errLabel_8 ;
            err.Clear();
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
              	l_strReturn3Pip = arrRetValues[2];
              	l_strReturn4Pip = arrRetValues[3];
            }
            break;
            errLabel_8 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _HandleAspirationErrorMPH96(ML_STAR, l_strReturn3Pip, l_strReturn3Tip, -1, DATA_CONTROLLER::SEQ::REAGENT_RANGE_SOLUTION1);
            }   /* end if from skip handler if no error */
            ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
            DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE_RELOAD = DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE_RELOAD + 96;
          }
        }
        if (DATA_CONTROLLER::FLT::SELECTED_RANGE_VOLUME >= l_fltDiluent)
        {
          ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strReturn3Disp = arrRetValues[2];
            	l_strReturn4Disp = arrRetValues[3];
          }
          ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strReturn3Disp = arrRetValues[2];
            	l_strReturn4Disp = arrRetValues[3];
          }
        }
        _ParallelReportMPH96(ML_STAR, DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, l_strReturn3Pip, l_strReturn4Pip, l_strReturn3Disp, l_strReturn4Disp, l_strReturn3Tip, l_strLiquidClass, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, l_strDescription);
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        _WaitForReport();
        l_strLabID = SeqGetLabwareId(l_seqPipettingPositions);
        _MakePlateBlink(ML_STAR, l_strLabID);
      }
    }
    DATA_CONTROLLER::SEQ::PLATES.SetCurrentPosition(l_intCurrentPosition);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  private function _Asp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void {
    o_str_ErrorDescriptions = 0;
    o_str_ErrorDescriptions = Translate("");
    if (i_int_ErrorCode == 0)
    {
      o_str_ErrorDescriptions = Translate("No Error");
      return;
    }
    if (i_int_ErrorCode == 1)
    {
      o_str_ErrorDescriptions = Translate("Syntax Error");
      return;
    }
    if (i_int_ErrorCode == 2)
    {
      o_str_ErrorDescriptions = Translate("Hardware Error");
      return;
    }
    if (i_int_ErrorCode == 3)
    {
      o_str_ErrorDescriptions = Translate("Not Executed Error");
      return;
    }
    if (i_int_ErrorCode == 4)
    {
      o_str_ErrorDescriptions = Translate("Clot Error");
      return;
    }
    if (i_int_ErrorCode == 5)
    {
      o_str_ErrorDescriptions = Translate("Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 6)
    {
      o_str_ErrorDescriptions = Translate("Insufficient Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 7)
    {
      o_str_ErrorDescriptions = Translate("Tip Present Error");
      return;
    }
    if (i_int_ErrorCode == 8)
    {
      o_str_ErrorDescriptions = Translate("No Tip Error");
      return;
    }
    if (i_int_ErrorCode == 9)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 10)
    {
      o_str_ErrorDescriptions = Translate("Execution Error");
      return;
    }
    if (i_int_ErrorCode == 11)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 12)
    {
      o_str_ErrorDescriptions = Translate("Calibrate Error");
      return;
    }
    if (i_int_ErrorCode == 13)
    {
      o_str_ErrorDescriptions = Translate("Unload Error");
      return;
    }
    if (i_int_ErrorCode == 14)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 15)
    {
      o_str_ErrorDescriptions = Translate("Parameter Error");
      return;
    }
    if (i_int_ErrorCode == 16)
    {
      o_str_ErrorDescriptions = Translate("Cover Open Error");
      return;
    }
    if (i_int_ErrorCode == 17)
    {
      o_str_ErrorDescriptions = Translate("Improper Aspiration Error");
      return;
    }
    if (i_int_ErrorCode == 18)
    {
      o_str_ErrorDescriptions = Translate("Wash Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 19)
    {
      o_str_ErrorDescriptions = Translate("Temperature Error");
      return;
    }
    if (i_int_ErrorCode == 20)
    {
      o_str_ErrorDescriptions = Translate("TADM overshot");
      return;
    }
    if (i_int_ErrorCode == 21)
    {
      o_str_ErrorDescriptions = Translate("Labware Error");
      return;
    }
    if (i_int_ErrorCode == 22)
    {
      o_str_ErrorDescriptions = Translate("Labware Gripped Error");
      return;
    }
    if (i_int_ErrorCode == 23)
    {
      o_str_ErrorDescriptions = Translate("Labware Lost Error");
      return;
    }
    if (i_int_ErrorCode == 24)
    {
      o_str_ErrorDescriptions = Translate("Illegal target plate position");
      return;
    }
    if (i_int_ErrorCode == 25)
    {
      o_str_ErrorDescriptions = Translate("Illegal Intervention Error");
      return;
    }
    if (i_int_ErrorCode == 26)
    {
      o_str_ErrorDescriptions = Translate("TADM undershot");
      return;
    }
    if (i_int_ErrorCode == 27)
    {
      o_str_ErrorDescriptions = Translate("Position Error");
      return;
    }
    if (i_int_ErrorCode == 28)
    {
      o_str_ErrorDescriptions = Translate("Unexpected cLLD Error");
      return;
    }
    if (i_int_ErrorCode == 29)
    {
      o_str_ErrorDescriptions = Translate("Area already occupied");
      return;
    }
    if (i_int_ErrorCode == 30)
    {
      o_str_ErrorDescriptions = Translate("Imposible to occupy Area");
      return;
    }
    if (i_int_ErrorCode == 31)
    {
      o_str_ErrorDescriptions = Translate("Anti drop control error");
      return;
    }
    if (i_int_ErrorCode == 99)
    {
      o_str_ErrorDescriptions = Translate("Slave Error");
      return;
    }
    if (i_int_ErrorCode == 100)
    {
      o_str_ErrorDescriptions = Translate("Wrong Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 101)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 102)
    {
      o_str_ErrorDescriptions = Translate("Liquid Level Error");
      return;
    }
    if (i_int_ErrorCode == 103)
    {
      o_str_ErrorDescriptions = Translate("Not Detected Error");
      return;
    }
    if (i_int_ErrorCode == 104)
    {
      o_str_ErrorDescriptions = Translate("Not Aspirated Error");
      return;
    }
    if (i_int_ErrorCode == 105)
    {
      o_str_ErrorDescriptions = Translate("Improper Dispensation Error");
      return;
    }
    if (i_int_ErrorCode == 106)
    {
      o_str_ErrorDescriptions = Translate("No Labware Error");
      return;
    }
    if (i_int_ErrorCode == 107)
    {
      o_str_ErrorDescriptions = Translate("Unexpected Labware Error");
      return;
    }
    if (i_int_ErrorCode == 108)
    {
      o_str_ErrorDescriptions = Translate("Wrong Labware Error");
      return;
    }
    if (i_int_ErrorCode == 109)
    {
      o_str_ErrorDescriptions = Translate("Barcode Mask Error");
      return;
    }
    if (i_int_ErrorCode == 110)
    {
      o_str_ErrorDescriptions = Translate("Barcode Not Unique Error");
      return;
    }
    if (i_int_ErrorCode == 111)
    {
      o_str_ErrorDescriptions = Translate("Barcode Already Used Error");
      return;
    }
    if (i_int_ErrorCode == 112)
    {
      o_str_ErrorDescriptions = Translate("Kit Lot Expired Error");
      return;
    }
    if (i_int_ErrorCode == 113)
    {
      o_str_ErrorDescriptions = Translate("Delimiter Error");
      return;
    }
  }

  private function _Disp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void {
    o_str_ErrorDescriptions = 0;
    o_str_ErrorDescriptions = Translate("");
    if (i_int_ErrorCode == 0)
    {
      o_str_ErrorDescriptions = Translate("No Error");
      return;
    }
    if (i_int_ErrorCode == 1)
    {
      o_str_ErrorDescriptions = Translate("Syntax Error");
      return;
    }
    if (i_int_ErrorCode == 2)
    {
      o_str_ErrorDescriptions = Translate("Hardware Error");
      return;
    }
    if (i_int_ErrorCode == 3)
    {
      o_str_ErrorDescriptions = Translate("Not Executed Error");
      return;
    }
    if (i_int_ErrorCode == 4)
    {
      o_str_ErrorDescriptions = Translate("Clot Error");
      return;
    }
    if (i_int_ErrorCode == 5)
    {
      o_str_ErrorDescriptions = Translate("Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 6)
    {
      o_str_ErrorDescriptions = Translate("Insufficient Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 7)
    {
      o_str_ErrorDescriptions = Translate("Tip Present Error");
      return;
    }
    if (i_int_ErrorCode == 8)
    {
      o_str_ErrorDescriptions = Translate("No Tip Error");
      return;
    }
    if (i_int_ErrorCode == 9)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 10)
    {
      o_str_ErrorDescriptions = Translate("Execution Error");
      return;
    }
    if (i_int_ErrorCode == 11)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 12)
    {
      o_str_ErrorDescriptions = Translate("Calibrate Error");
      return;
    }
    if (i_int_ErrorCode == 13)
    {
      o_str_ErrorDescriptions = Translate("Unload Error");
      return;
    }
    if (i_int_ErrorCode == 14)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 15)
    {
      o_str_ErrorDescriptions = Translate("Parameter Error");
      return;
    }
    if (i_int_ErrorCode == 16)
    {
      o_str_ErrorDescriptions = Translate("Cover Open Error");
      return;
    }
    if (i_int_ErrorCode == 17)
    {
      o_str_ErrorDescriptions = Translate("Improper Dispense Error");
      return;
    }
    if (i_int_ErrorCode == 18)
    {
      o_str_ErrorDescriptions = Translate("Wash Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 19)
    {
      o_str_ErrorDescriptions = Translate("Temperature Error");
      return;
    }
    if (i_int_ErrorCode == 20)
    {
      o_str_ErrorDescriptions = Translate("TADM overshot");
      return;
    }
    if (i_int_ErrorCode == 21)
    {
      o_str_ErrorDescriptions = Translate("Labware Error");
      return;
    }
    if (i_int_ErrorCode == 22)
    {
      o_str_ErrorDescriptions = Translate("Labware Gripped Error");
      return;
    }
    if (i_int_ErrorCode == 23)
    {
      o_str_ErrorDescriptions = Translate("Labware Lost Error");
      return;
    }
    if (i_int_ErrorCode == 24)
    {
      o_str_ErrorDescriptions = Translate("Illegal target plate position");
      return;
    }
    if (i_int_ErrorCode == 25)
    {
      o_str_ErrorDescriptions = Translate("Illegal Intervention Error");
      return;
    }
    if (i_int_ErrorCode == 26)
    {
      o_str_ErrorDescriptions = Translate("TADM undershot");
      return;
    }
    if (i_int_ErrorCode == 27)
    {
      o_str_ErrorDescriptions = Translate("Position Error");
      return;
    }
    if (i_int_ErrorCode == 28)
    {
      o_str_ErrorDescriptions = Translate("Unexpected cLLD Error");
      return;
    }
    if (i_int_ErrorCode == 29)
    {
      o_str_ErrorDescriptions = Translate("Area already occupied");
      return;
    }
    if (i_int_ErrorCode == 30)
    {
      o_str_ErrorDescriptions = Translate("Imposible to occupy Area");
      return;
    }
    if (i_int_ErrorCode == 31)
    {
      o_str_ErrorDescriptions = Translate("Anti drop control error");
      return;
    }
    if (i_int_ErrorCode == 99)
    {
      o_str_ErrorDescriptions = Translate("Slave Error");
      return;
    }
    if (i_int_ErrorCode == 100)
    {
      o_str_ErrorDescriptions = Translate("Wrong Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 101)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 102)
    {
      o_str_ErrorDescriptions = Translate("Liquid Level Error");
      return;
    }
    if (i_int_ErrorCode == 103)
    {
      o_str_ErrorDescriptions = Translate("Not Detected Error");
      return;
    }
    if (i_int_ErrorCode == 104)
    {
      o_str_ErrorDescriptions = Translate("Not Aspirated Error");
      return;
    }
    if (i_int_ErrorCode == 105)
    {
      o_str_ErrorDescriptions = Translate("Improper Dispensation Error");
      return;
    }
    if (i_int_ErrorCode == 106)
    {
      o_str_ErrorDescriptions = Translate("No Labware Error");
      return;
    }
    if (i_int_ErrorCode == 107)
    {
      o_str_ErrorDescriptions = Translate("Unexpected Labware Error");
      return;
    }
    if (i_int_ErrorCode == 108)
    {
      o_str_ErrorDescriptions = Translate("Wrong Labware Error");
      return;
    }
    if (i_int_ErrorCode == 109)
    {
      o_str_ErrorDescriptions = Translate("Barcode Mask Error");
      return;
    }
    if (i_int_ErrorCode == 110)
    {
      o_str_ErrorDescriptions = Translate("Barcode Not Unique Error");
      return;
    }
    if (i_int_ErrorCode == 111)
    {
      o_str_ErrorDescriptions = Translate("Barcode Already Used Error");
      return;
    }
    if (i_int_ErrorCode == 112)
    {
      o_str_ErrorDescriptions = Translate("Kit Lot Expired Error");
      return;
    }
    if (i_int_ErrorCode == 113)
    {
      o_str_ErrorDescriptions = Translate("Delimiter Error");
      return;
    }
  }

  private function _Recovery_Codes( variable i_int_RecoveryUsed, variable & o_str_RecoveryUsed ) void {
    o_str_RecoveryUsed = 0;
    if (i_int_RecoveryUsed == 0)
    {
      o_str_RecoveryUsed = Translate("None");
      return;
    }
    if (i_int_RecoveryUsed == 1)
    {
      o_str_RecoveryUsed = Translate("Abort");
      return;
    }
    if (i_int_RecoveryUsed == 2)
    {
      o_str_RecoveryUsed = Translate("Cancel");
      return;
    }
    if (i_int_RecoveryUsed == 3)
    {
      o_str_RecoveryUsed = Translate("Initialize");
      return;
    }
    if (i_int_RecoveryUsed == 4)
    {
      o_str_RecoveryUsed = Translate("Repeat");
      return;
    }
    if (i_int_RecoveryUsed == 5)
    {
      o_str_RecoveryUsed = Translate("Exclude");
      return;
    }
    if (i_int_RecoveryUsed == 6)
    {
      o_str_RecoveryUsed = Translate("Waste");
      return;
    }
    if (i_int_RecoveryUsed == 7)
    {
      o_str_RecoveryUsed = Translate("Air");
      return;
    }
    if (i_int_RecoveryUsed == 8)
    {
      o_str_RecoveryUsed = Translate("Bottom");
      return;
    }
    if (i_int_RecoveryUsed == 9)
    {
      o_str_RecoveryUsed = Translate("Continue");
      return;
    }
    if (i_int_RecoveryUsed == 10)
    {
      o_str_RecoveryUsed = Translate("Barcode");
      return;
    }
    if (i_int_RecoveryUsed == 11)
    {
      o_str_RecoveryUsed = Translate("Next");
      return;
    }
    if (i_int_RecoveryUsed == 12)
    {
      o_str_RecoveryUsed = Translate("Available");
      return;
    }
    if (i_int_RecoveryUsed == 13)
    {
      o_str_RecoveryUsed = Translate("Refill");
      return;
    }
  }

  private function _ParallelReport( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidLevelReturnValue, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void {
    if( 0 == t_eventWaitForParallel.WaitEvent(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
    }
    if(t_intForkID != 0) Join(t_intForkID,0);
    t_intForkID = 0;
    t_blnMPH96 = ASWGLOBAL::BOOL::FALSE;
    t_strReportPath = i_str_ReportFilePath;
    t_strAspReturnValue = i_str_AspReturnValue;
    t_strDispReturnValue = i_str_DispReturnValue;
    t_strLiquidLevelReturn = i_str_LiquidLevelReturnValue;
    t_strLiquidClass = i_str_LiquidClass;
    t_blnShowSampleReport = i_bln_ShowSampleReport;
    t_blnShowReagentReport = i_bln_ShowReagentReport;
    t_strNameForTransfer = i_str_NameForTransfer;
    t_strDeckLayoutFile = DevGetDeckLayoutFileName(Instrument);
    t_intForkID = Fork("_ReportStarter");
  }

  private function _ReportStarter(  ) void {
    {
      device ML_STAR("","",hslTrue);
      ML_STAR = GetDeviceRef(t_strDeckLayoutFile,"ML_STAR");
      if(!t_blnMPH96) _Report(ML_STAR,t_strReportPath,t_strAspReturnValue,t_strDispReturnValue,t_strLiquidLevelReturn,t_strLiquidClass,t_blnShowSampleReport,t_blnShowReagentReport,t_strNameForTransfer);
      if(t_blnMPH96) _ReportMPH96(ML_STAR,t_strReportPath,t_strAspReturnValue3,t_strAspReturnValue4,t_strDispReturnValue3,t_strDispReturnValue4,t_strTipPickUpReturn,t_strLiquidClass,t_blnShowSampleReport,t_blnShowReagentReport,t_strNameForTransfer);
    }
    if( 0 == t_eventWaitForParallel.SetEvent() )
    {
          MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }

  private function _GetSequenceForPipettingMPH( variable i_strLabID, sequence & o_seqPipetting ) void {
    private variable l_intTotalPositions;
    private variable l_intIndex;
    private variable l_arrPositionIDs[];
    { sequence __temp; o_seqPipetting = __temp; }
    SeqRemoveAll(o_seqPipetting);
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationArray(Translate("SequenceMPH384"), Translate("s"), l_arrPositionIDs, l_intTotalPositions);
    {
      for(l_intIndex = 0; l_intIndex < 384;)
      {
        l_intIndex = l_intIndex + 1;
        SeqAdd(o_seqPipetting, i_strLabID, l_arrPositionIDs.ElementAt( l_intIndex -1));
      }
    }
    o_seqPipetting.SetCurrentPosition(1);
    o_seqPipetting.SetCount(384);
    if(0){
      Util2::Debug::TraceSequence(o_seqPipetting);
    }
  }

  private function _Report( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidLevelReturnValue, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void {
    private variable xls_PosID_asp;
    private variable xls_BC_Rack_Asp;
    private variable xls_Recov_asp;
    private variable xls_BC_Cont_Asp;
    private variable xls_BC_Rack_Disp;
    private variable xls_LabID_asp;
    private variable xls_BC_Cont_Disp;
    private variable xls_chan_use;
    private variable xls_Status_asp;
    private variable xls_vol_disp;
    private variable xls_Recov_disp;
    private variable xls_LabID_disp;
    private variable l_intDeckID;
    private variable xls_vol_detected;
    private variable xls_PipetteDirection;
    private variable xls_Status_disp;
    private variable xls_Time;
    private variable xls_vol_asp;
    private variable xls_Date;
    private variable xls_PosID_disp;
    private file writeSampleFile;
    private file writeReagentFile;
    private variable xls_PosID;
    private variable xls_Status;
    private variable xls_Recov;
    private variable xls_vol;
    private variable xls_LabID;
    private file writeErrorFile;
    private file writeReportFile;
    private variable l_intNumPosAsp;
    private variable l_intNumPosDisp;
    private variable l_intNumPosLiquid;
    private variable l_blnEnableAsp;
    private variable l_blnEnableDisp;
    private variable l_blnEnableLiquid;
    private variable l_intLoopNumber;
    private variable l_intIndex;
    private variable l_intReturnPosition;
    private variable l_intLength;
    private variable l_intElementID;
    private variable l_strAccessName;
    private variable l_fltZCoord;
    private variable l_fltYCoord;
    private variable l_fltXCoord;
    private variable l_fltACoord;
    private variable l_blnSimMode;
    private variable l_fltLLHeight;
    private variable l_fltLLHeightMinusBottom;
    private variable l_blnLabwareValid;
    l_intDeckID = VectorDb_Deck::GetDeckID2(Instrument);
    l_blnSimMode = Util::GetSimulationMode();
    xls_Date = TimGetFormattedDate(Translate("%m/%d/%Y"));
    xls_Time = TimGetFormattedTime(Translate("%H:%M"));
    writeSampleFile.AddField("Date", xls_Date, hslString, 255);
    writeSampleFile.AddField("Time", xls_Time, hslString, 255);
    writeSampleFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeSampleFile.AddField("Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeSampleFile.AddField("Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeSampleFile.AddField("LabID", xls_LabID_asp, hslString, 255);
    writeSampleFile.AddField("PosID", xls_PosID_asp, hslString, 255);
    writeSampleFile.AddField("Volume Removed uL", xls_vol_asp, hslString, 255);
    writeSampleFile.AddField("Voume Detected uL", xls_vol_detected, hslString, 255);
    writeSampleFile.AddField("Error", xls_Status_asp, hslString, 255);
    writeSampleFile.AddField("Recovery", xls_Recov_asp, hslString, 255);
    if( 0 == writeSampleFile.Open(i_str_ReportFilePath + " " + "Sample", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    writeReagentFile.AddField("Date", xls_Date, hslString, 255);
    writeReagentFile.AddField("Time", xls_Time, hslString, 255);
    writeReagentFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReagentFile.AddField("LabID", xls_LabID_asp, hslString, 255);
    writeReagentFile.AddField("PosID", xls_PosID_asp, hslString, 255);
    writeReagentFile.AddField("Volume Removed uL", xls_vol_asp, hslString, 255);
    writeReagentFile.AddField("Voume Detected uL", xls_vol_detected, hslString, 255);
    writeReagentFile.AddField("Error", xls_Status_asp, hslString, 255);
    writeReagentFile.AddField("Recovery", xls_Recov_asp, hslString, 255);
    if( 0 == writeReagentFile.Open(i_str_ReportFilePath + " " + "Reagent", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    writeErrorFile.AddField("Date", xls_Date, hslString, 255);
    writeErrorFile.AddField("Time", xls_Time, hslString, 255);
    writeErrorFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeErrorFile.AddField("Pipetting Direction", xls_PipetteDirection, hslString, 255);
    writeErrorFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeErrorFile.AddField("Volume", xls_vol, hslString, 255);
    writeErrorFile.AddField("LabID", xls_LabID, hslString, 255);
    writeErrorFile.AddField("PosID", xls_PosID, hslString, 255);
    writeErrorFile.AddField("Error", xls_Status, hslString, 255);
    writeErrorFile.AddField("Recovery", xls_Recov, hslString, 255);
    if( 0 == writeErrorFile.Open(i_str_ReportFilePath + " " + "Error_Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    writeReportFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
    writeReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
    writeReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
    writeReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
    writeReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
    writeReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
    writeReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
    writeReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
    writeReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
    writeReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
    writeReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
    writeReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
    writeReportFile.AddField("Liquid Class", i_str_LiquidClass, hslString, 255);
    if( 0 == writeReportFile.Open(i_str_ReportFilePath + " " + "Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    l_blnEnableAsp = ASWGLOBAL::BOOL::FALSE;
    l_blnEnableDisp = ASWGLOBAL::BOOL::FALSE;
    l_blnEnableLiquid = ASWGLOBAL::BOOL::FALSE;
    l_intNumPosAsp = StepReturn::GetNumberOfPositions(i_str_AspReturnValue);
    l_intNumPosDisp = StepReturn::GetNumberOfPositions(i_str_DispReturnValue);
    l_intNumPosLiquid = StepReturn::GetNumberOfPositions(i_str_LiquidLevelReturnValue);
    l_intLoopNumber = 0;
    if (l_intNumPosAsp > 0)
    {
      if (l_intNumPosAsp > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosAsp;
      }
      l_blnEnableAsp = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_intNumPosDisp > 0)
    {
      if (l_intNumPosDisp > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosDisp;
      }
      l_blnEnableDisp = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_intNumPosLiquid > 0)
    {
      if (l_intNumPosLiquid > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosLiquid;
      }
      l_blnEnableLiquid = ASWGLOBAL::BOOL::TRUE;
    }
    {
      for(l_intIndex = 0; l_intIndex < l_intLoopNumber;)
      {
        l_intIndex = l_intIndex + 1;
        xls_chan_use = Translate("-----");
        xls_BC_Rack_Asp = Translate("-----");
        xls_BC_Cont_Asp = Translate("-----");
        xls_LabID_asp = Translate("-----");
        xls_PosID_asp = Translate("-----");
        xls_vol_asp = Translate("-----");
        xls_Status_asp = Translate("-----");
        xls_Recov_asp = Translate("-----");
        xls_BC_Rack_Disp = Translate("-----");
        xls_BC_Cont_Disp = Translate("-----");
        xls_LabID_disp = Translate("-----");
        xls_PosID_disp = Translate("-----");
        xls_vol_disp = Translate("-----");
        xls_Status_disp = Translate("-----");
        xls_Recov_disp = Translate("-----");
        xls_vol_detected = Translate("-----");
        xls_PipetteDirection = Translate("-----");
        if (l_blnEnableAsp == ASWGLOBAL::BOOL::TRUE)
        {
          l_intReturnPosition = StepReturn::GetPositionFromNum(l_intIndex, i_str_AspReturnValue);
          xls_LabID_asp = StepReturn::GetLabwareId(l_intReturnPosition, i_str_AspReturnValue);
          if(0){
            l_intLength = StrGetLength(xls_LabID_asp);
          }
          l_blnLabwareValid = DevIsValidLabwareForCurrentDeckLayout(Instrument, xls_LabID_asp);
          if (l_blnLabwareValid != ASWGLOBAL::BOOL::FALSE)
          {
            xls_PosID_asp = StepReturn::GetPositionId(l_intReturnPosition, i_str_AspReturnValue);
            xls_vol_asp = StepReturn::GetStepData(l_intReturnPosition, i_str_AspReturnValue);
            xls_chan_use = StepReturn::GetPosition(l_intReturnPosition, i_str_AspReturnValue);
            xls_Status_asp = StepReturn::GetMainError(l_intReturnPosition, i_str_AspReturnValue);
            xls_Recov_asp = StepReturn::GetRecoveryButton(l_intReturnPosition, i_str_AspReturnValue);
            l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_asp);
            l_strAccessName = VectorDb_Labware::GetLabwareAccessName(l_intElementID);
            l_strAccessName = StrConcat4(l_strAccessName, Translate("\\"), xls_PosID_asp, Translate(""));
            xls_BC_Rack_Asp = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
            xls_BC_Cont_Asp = VectorDb_Labware::GetLabwareBarcode(l_strAccessName);
            l_intLength = StrGetLength(xls_BC_Rack_Asp);
            if (l_intLength == 0)
            {
              xls_BC_Rack_Asp = Translate("-----");
            }
            l_intLength = StrGetLength(xls_BC_Cont_Asp);
            if (l_intLength == 0)
            {
              xls_BC_Cont_Asp = Translate("-----");
            }
            _Asp_Error_Codes(xls_Status_asp, xls_Status_asp);
            _Recovery_Codes(xls_Recov_asp, xls_Recov_asp);
            if (xls_Status_asp != "No Error")
            {
              xls_PipetteDirection = Translate("ASP");
              xls_LabID = xls_LabID_asp;
              xls_PosID = xls_PosID_asp;
              xls_Status = xls_Status_asp;
              xls_Recov = xls_Recov_asp;
              xls_vol = xls_vol_asp;
              if( 0 == writeErrorFile.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          else
          {
            xls_LabID_asp = Translate("-----");
          }
        }
        if (l_blnEnableDisp == ASWGLOBAL::BOOL::TRUE)
        {
          l_intReturnPosition = StepReturn::GetPositionFromNum(l_intIndex, i_str_DispReturnValue);
          xls_LabID_disp = StepReturn::GetLabwareId(l_intReturnPosition, i_str_DispReturnValue);
          if(0){
            l_intLength = StrGetLength(xls_LabID_disp);
          }
          l_blnLabwareValid = DevIsValidLabwareForCurrentDeckLayout(Instrument, xls_LabID_disp);
          if (l_blnLabwareValid != ASWGLOBAL::BOOL::FALSE)
          {
            xls_PosID_disp = StepReturn::GetPositionId(l_intReturnPosition, i_str_DispReturnValue);
            xls_chan_use = StepReturn::GetPosition(l_intReturnPosition, i_str_DispReturnValue);
            xls_vol_disp = StepReturn::GetStepData(l_intReturnPosition, i_str_DispReturnValue);
            xls_Status_disp = StepReturn::GetMainError(l_intReturnPosition, i_str_DispReturnValue);
            xls_Recov_disp = StepReturn::GetRecoveryButton(l_intReturnPosition, i_str_DispReturnValue);
            l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_disp);
            l_strAccessName = VectorDb_Labware::GetLabwareAccessName(l_intElementID);
            l_strAccessName = StrConcat4(l_strAccessName, Translate("\\"), xls_PosID_disp, Translate(""));
            xls_BC_Rack_Disp = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
            xls_BC_Cont_Disp = VectorDb_Labware::GetLabwareBarcode(l_strAccessName);
            l_intLength = StrGetLength(xls_BC_Rack_Disp);
            if (l_intLength == 0)
            {
              xls_BC_Rack_Disp = Translate("-----");
            }
            l_intLength = StrGetLength(xls_BC_Cont_Disp);
            if (l_intLength == 0)
            {
              xls_BC_Cont_Disp = Translate("-----");
            }
            _Disp_Error_Codes(xls_Status_disp, xls_Status_disp);
            _Recovery_Codes(xls_Recov_disp, xls_Recov_disp);
            if (xls_Status_disp != "No Error")
            {
              xls_PipetteDirection = Translate("DISP");
              xls_LabID = xls_LabID_disp;
              xls_PosID = xls_PosID_disp;
              xls_Status = xls_Status_disp;
              xls_Recov = xls_Recov_disp;
              xls_vol = xls_vol_disp;
              if( 0 == writeErrorFile.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          else
          {
            xls_LabID_disp = Translate("-----");
          }
        }
        if (l_blnEnableLiquid == ASWGLOBAL::BOOL::TRUE)
        {
          l_intReturnPosition = StepReturn::GetPositionFromNum(l_intIndex, i_str_LiquidLevelReturnValue);
          l_fltLLHeight = StepReturn::GetLastLiquidLevel(l_intReturnPosition, i_str_LiquidLevelReturnValue);
          if (l_blnEnableAsp == ASWGLOBAL::BOOL::TRUE)
          {
            l_blnLabwareValid = DevIsValidLabwareForCurrentDeckLayout(Instrument, xls_LabID_asp);
            if (l_blnLabwareValid == ASWGLOBAL::BOOL::TRUE)
            {
              DevGetLabwarePositionEx(Instrument, xls_LabID_asp, xls_PosID_asp, l_fltXCoord, l_fltYCoord, l_fltZCoord, l_fltACoord);
              if (l_blnSimMode == ASWGLOBAL::BOOL::TRUE)
              {
                l_fltLLHeight = l_fltZCoord + 5.0;
              }
              l_fltLLHeightMinusBottom = l_fltLLHeight - l_fltZCoord;
              if (l_fltLLHeightMinusBottom < 0.0)
              {
                l_fltLLHeightMinusBottom = 0.0;
              }
              xls_vol_detected = DevComputeContainerVolume2(Instrument, xls_LabID_asp, xls_PosID_asp, l_fltLLHeightMinusBottom, 0, 0);
              xls_vol_detected = xls_vol_detected * 1000.0;
              xls_vol_detected = StrConcat2(xls_vol_detected, Translate(""));
            }
          }
        }
        xls_chan_use = StrConcat2(xls_chan_use, Translate(""));
        {
             if(xls_chan_use != "-----")
             {
                  if(l_blnEnableAsp == hslTrue && i_bln_ShowSampleReport == hslTrue) writeSampleFile.WriteRecord();
                  if(l_blnEnableAsp == hslTrue && i_bln_ShowReagentReport == hslTrue) writeReagentFile.WriteRecord();
                  if(l_blnEnableAsp == hslTrue || l_blnEnableDisp == hslTrue) writeReportFile.WriteRecord();
             }
        }
      }
    }
    if( 0 != writeErrorFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeErrorFile.RemoveFields();
    if( 0 != writeReagentFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReagentFile.RemoveFields();
    if( 0 != writeSampleFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeSampleFile.RemoveFields();
    if( 0 != writeReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReportFile.RemoveFields();
  }

  private function _ReportMPH96( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_PickupReturnValue3, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void {
    private variable xls_BC_Rack_Asp;
    private variable xls_PosID_asp;
    private variable xls_PosID;
    private variable l_fltLLHeightMinusBottom;
    private variable xls_Recov_asp;
    private variable xls_BC_Cont_Asp;
    private variable xls_BC_Rack_Disp;
    private variable xls_LabID_asp;
    private variable l_blnEnableAsp;
    private variable xls_BC_Cont_Disp;
    private variable l_blnEnableDisp;
    private variable xls_Status;
    private variable xls_chan_use;
    private variable l_intReturnPosition;
    private variable xls_Status_asp;
    private variable l_blnEnableLiquid;
    private variable xls_vol_disp;
    private variable l_intIndex;
    private variable l_intLoopNumber;
    private variable xls_vol;
    private variable xls_Recov;
    private variable xls_Recov_disp;
    private variable l_blnSimMode;
    private variable l_intNumPosDisp;
    private variable xls_LabID_disp;
    private variable xls_LabID;
    private variable l_intDeckID;
    private variable xls_vol_detected;
    private variable xls_PipetteDirection;
    private variable xls_Status_disp;
    private variable l_intNumPosAsp;
    private variable l_strAccessName;
    private variable xls_vol_asp;
    private variable xls_Time;
    private variable l_intLength;
    private variable xls_PosID_disp;
    private variable l_intNumPosLiquid;
    private variable l_intElementID;
    private variable xls_Date;
    private file writeReagentFile;
    private file writeSampleFile;
    private file writeErrorFile;
    private file writeReportFile;
    private sequence l_seqTemp;
    private variable l_blnContainerConnected;
    private variable l_strPosIDStart;
    private variable l_strPosIDEnd;
    private variable l_strChanStart;
    private variable l_strChanEnd;
    xls_chan_use = Translate("-----");
    xls_BC_Rack_Asp = Translate("-----");
    xls_BC_Cont_Asp = Translate("-----");
    xls_LabID_asp = Translate("-----");
    xls_PosID_asp = Translate("-----");
    xls_vol_asp = Translate("-----");
    xls_Status_asp = Translate("-----");
    xls_Recov_asp = Translate("-----");
    xls_BC_Rack_Disp = Translate("-----");
    xls_BC_Cont_Disp = Translate("-----");
    xls_LabID_disp = Translate("-----");
    xls_PosID_disp = Translate("-----");
    xls_vol_disp = Translate("-----");
    xls_Status_disp = Translate("-----");
    xls_Recov_disp = Translate("-----");
    xls_vol_detected = Translate("-----");
    xls_PipetteDirection = Translate("-----");
    l_intDeckID = VectorDb_Deck::GetDeckID2(Instrument);
    l_blnSimMode = Util::GetSimulationMode();
    xls_Date = TimGetFormattedDate(Translate("%m/%d/%Y"));
    xls_Time = TimGetFormattedTime(Translate("%H:%M"));
    writeSampleFile.AddField("Date", xls_Date, hslString, 255);
    writeSampleFile.AddField("Time", xls_Time, hslString, 255);
    writeSampleFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeSampleFile.AddField("Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeSampleFile.AddField("Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeSampleFile.AddField("LabID", xls_LabID_asp, hslString, 255);
    writeSampleFile.AddField("PosID", xls_PosID_asp, hslString, 255);
    writeSampleFile.AddField("Volume Removed uL", xls_vol_asp, hslString, 255);
    writeSampleFile.AddField("Voume Detected uL", xls_vol_detected, hslString, 255);
    writeSampleFile.AddField("Error", xls_Status_asp, hslString, 255);
    writeSampleFile.AddField("Recovery", xls_Recov_asp, hslString, 255);
    if( 0 == writeSampleFile.Open(i_str_ReportFilePath + " " + "Sample", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    writeReagentFile.AddField("Date", xls_Date, hslString, 255);
    writeReagentFile.AddField("Time", xls_Time, hslString, 255);
    writeReagentFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReagentFile.AddField("LabID", xls_LabID_asp, hslString, 255);
    writeReagentFile.AddField("PosID", xls_PosID_asp, hslString, 255);
    writeReagentFile.AddField("Volume Removed uL", xls_vol_asp, hslString, 255);
    writeReagentFile.AddField("Voume Detected uL", xls_vol_detected, hslString, 255);
    writeReagentFile.AddField("Error", xls_Status_asp, hslString, 255);
    writeReagentFile.AddField("Recovery", xls_Recov_asp, hslString, 255);
    if( 0 == writeReagentFile.Open(i_str_ReportFilePath + " " + "Reagent", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    writeErrorFile.AddField("Date", xls_Date, hslString, 255);
    writeErrorFile.AddField("Time", xls_Time, hslString, 255);
    writeErrorFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeErrorFile.AddField("Pipetting Direction", xls_PipetteDirection, hslString, 255);
    writeErrorFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeErrorFile.AddField("Volume", xls_vol, hslString, 255);
    writeErrorFile.AddField("LabID", xls_LabID, hslString, 255);
    writeErrorFile.AddField("PosID", xls_PosID, hslString, 255);
    writeErrorFile.AddField("Error", xls_Status, hslString, 255);
    writeErrorFile.AddField("Recovery", xls_Recov, hslString, 255);
    if( 0 == writeErrorFile.Open(i_str_ReportFilePath + " " + "Error_Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    writeReportFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
    writeReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
    writeReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
    writeReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
    writeReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
    writeReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
    writeReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
    writeReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
    writeReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
    writeReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
    writeReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
    writeReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
    writeReportFile.AddField("Liquid Class", i_str_LiquidClass, hslString, 255);
    if( 0 == writeReportFile.Open(i_str_ReportFilePath + " " + "Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    l_blnEnableAsp = ASWGLOBAL::BOOL::FALSE;
    l_blnEnableDisp = ASWGLOBAL::BOOL::FALSE;
    l_blnEnableLiquid = ASWGLOBAL::BOOL::FALSE;
    l_intNumPosAsp = StepReturn::GetNumberOfPositions(i_str_AspReturnValue4);
    l_intNumPosDisp = StepReturn::GetNumberOfPositions(i_str_DispReturnValue4);
    l_intNumPosLiquid = StepReturn::GetNumberOfPositions(i_str_PickupReturnValue3);
    l_intLoopNumber = 0;
    if (l_intNumPosAsp > 0)
    {
      if (l_intNumPosAsp > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosAsp;
      }
      l_blnEnableAsp = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_intNumPosDisp > 0)
    {
      if (l_intNumPosDisp > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosDisp;
      }
      l_blnEnableDisp = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_intNumPosLiquid > 0)
    {
      if (l_intNumPosLiquid > l_intLoopNumber)
      {
        l_intLoopNumber = l_intNumPosLiquid;
      }
      l_blnEnableLiquid = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_blnEnableAsp == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReturnPosition = 1;
      xls_LabID_asp = StepReturn::GetLabwareId(l_intReturnPosition, i_str_AspReturnValue3);
      l_intLength = StrGetLength(xls_LabID_asp);
      if (l_intLength > 0)
      {
        xls_vol_asp = StepReturn::GetStepData(l_intReturnPosition, i_str_AspReturnValue3);
        xls_Status_asp = StepReturn::GetMainError(l_intReturnPosition, i_str_AspReturnValue3);
        xls_Recov_asp = StepReturn::GetRecoveryButton(l_intReturnPosition, i_str_AspReturnValue3);
        l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_asp);
        xls_BC_Rack_Asp = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
        l_intLength = StrGetLength(xls_BC_Rack_Asp);
        if (l_intLength == 0)
        {
          xls_BC_Rack_Asp = Translate("-----");
        }
        _Asp_Error_Codes(xls_Status_asp, xls_Status_asp);
        _Recovery_Codes(xls_Recov_asp, xls_Recov_asp);
      }
      else
      {
        xls_LabID_asp = Translate("-----");
      }
    }
    if (l_blnEnableDisp == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReturnPosition = 1;
      xls_LabID_disp = StepReturn::GetLabwareId(l_intReturnPosition, i_str_DispReturnValue3);
      l_intLength = StrGetLength(xls_LabID_disp);
      if (l_intLength > 0)
      {
        xls_vol_disp = StepReturn::GetStepData(l_intReturnPosition, i_str_DispReturnValue3);
        xls_Status_disp = StepReturn::GetMainError(l_intReturnPosition, i_str_DispReturnValue3);
        xls_Recov_disp = StepReturn::GetRecoveryButton(l_intReturnPosition, i_str_DispReturnValue3);
        l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_disp);
        xls_BC_Rack_Disp = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
        l_intLength = StrGetLength(xls_BC_Rack_Disp);
        if (l_intLength == 0)
        {
          xls_BC_Rack_Disp = Translate("-----");
        }
        l_intLength = StrGetLength(xls_BC_Cont_Disp);
        if (l_intLength == 0)
        {
          xls_BC_Cont_Disp = Translate("-----");
        }
        _Disp_Error_Codes(xls_Status_disp, xls_Status_disp);
        _Recovery_Codes(xls_Recov_disp, xls_Recov_disp);
      }
      else
      {
        xls_LabID_disp = Translate("-----");
      }
    }
    if (l_blnEnableLiquid == ASWGLOBAL::BOOL::TRUE)
    {
      STAR_MPH96_TOOLS::TOOL_GetLiquidLevelHeight(Instrument, i_str_PickupReturnValue3, i_str_AspReturnValue3, l_fltLLHeightMinusBottom);
      if (l_blnEnableAsp == ASWGLOBAL::BOOL::TRUE)
      {
        if (l_blnSimMode == ASWGLOBAL::BOOL::TRUE)
        {
          l_fltLLHeightMinusBottom = l_fltLLHeightMinusBottom + 5.0;
        }
        if (l_fltLLHeightMinusBottom < 0.0)
        {
          l_fltLLHeightMinusBottom = 0.0;
        }
        SeqRemoveAll(l_seqTemp);
        SeqAdd(l_seqTemp, xls_LabID_asp, xls_PosID_asp);
        l_seqTemp.SetCurrentPosition(1);
        LPQ::LABWARE_IsContainersConnected(Instrument, l_seqTemp, l_blnContainerConnected);
        xls_vol_detected = DevComputeContainerVolume2(Instrument, xls_LabID_asp, xls_PosID_asp, l_fltLLHeightMinusBottom, 0, l_blnContainerConnected);
        xls_vol_detected = xls_vol_detected * 1000.0;
        xls_vol_detected = StrConcat2(xls_vol_detected, Translate(""));
      }
    }
    xls_chan_use = Translate("-----");
    xls_BC_Cont_Asp = Translate("-----");
    xls_PosID_asp = Translate("-----");
    xls_BC_Cont_Disp = Translate("-----");
    xls_PosID_disp = Translate("-----");
    if (l_blnEnableAsp == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReturnPosition = l_intIndex;
      l_intLength = StrGetLength(xls_LabID_asp);
      if (l_intLength > 0)
      {
        l_strPosIDStart = StepReturn::GetBarcodePosition(1, i_str_AspReturnValue4);
        l_strPosIDEnd = StepReturn::GetBarcodePosition(96, i_str_AspReturnValue4);
        xls_PosID_asp = StrConcat4(l_strPosIDStart, Translate(" - "), l_strPosIDEnd, Translate(""));
        l_strChanStart = StepReturn::GetPosition(1, i_str_AspReturnValue4);
        l_strChanEnd = StepReturn::GetPosition(96, i_str_AspReturnValue4);
        xls_chan_use = StrConcat4(l_strChanStart, Translate(" - "), l_strChanEnd, Translate(""));
        l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_asp);
        l_strAccessName = VectorDb_Labware::GetLabwareAccessName(l_intElementID);
        l_strAccessName = StrConcat4(l_strAccessName, Translate("\\"), xls_PosID_asp, Translate(""));
        if(0){
          xls_BC_Cont_Asp = VectorDb_Labware::GetLabwareBarcode(l_strAccessName);
        }
        l_intLength = StrGetLength(xls_BC_Cont_Asp);
        if (l_intLength == 0)
        {
          xls_BC_Cont_Asp = Translate("-----");
        }
        if (xls_Status_asp != "No Error")
        {
          xls_PipetteDirection = Translate("ASP");
          xls_LabID = xls_LabID_asp;
          xls_PosID = xls_PosID_asp;
          xls_Status = xls_Status_asp;
          xls_Recov = xls_Recov_asp;
          xls_vol = xls_vol_asp;
          if( 0 == writeErrorFile.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      else
      {
        xls_LabID_asp = Translate("-----");
      }
    }
    if (l_blnEnableDisp == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReturnPosition = l_intIndex;
      l_intLength = StrGetLength(xls_LabID_disp);
      if (l_intLength > 0)
      {
        l_strPosIDStart = StepReturn::GetBarcodePosition(1, i_str_DispReturnValue4);
        l_strPosIDEnd = StepReturn::GetBarcodePosition(96, i_str_DispReturnValue4);
        xls_PosID_disp = StrConcat4(l_strPosIDStart, Translate(" - "), l_strPosIDEnd, Translate(""));
        l_strChanStart = StepReturn::GetPosition(1, i_str_DispReturnValue4);
        l_strChanEnd = StepReturn::GetPosition(96, i_str_DispReturnValue4);
        xls_chan_use = StrConcat4(l_strChanStart, Translate(" - "), l_strChanEnd, Translate(""));
        l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, xls_LabID_disp);
        l_strAccessName = VectorDb_Labware::GetLabwareAccessName(l_intElementID);
        l_strAccessName = StrConcat4(l_strAccessName, Translate("\\"), xls_PosID_disp, Translate(""));
        if(0){
          xls_BC_Cont_Disp = VectorDb_Labware::GetLabwareBarcode(l_strAccessName);
        }
        l_intLength = StrGetLength(xls_BC_Cont_Disp);
        if (l_intLength == 0)
        {
          xls_BC_Cont_Disp = Translate("-----");
        }
        if (xls_Status_disp != "No Error")
        {
          xls_PipetteDirection = Translate("DISP");
          xls_LabID = xls_LabID_disp;
          xls_PosID = xls_PosID_disp;
          xls_Status = xls_Status_disp;
          xls_Recov = xls_Recov_disp;
          xls_vol = xls_vol_disp;
          if( 0 == writeErrorFile.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      else
      {
        xls_LabID_disp = Translate("-----");
      }
    }
    {
         if(l_blnEnableAsp == hslTrue && i_bln_ShowSampleReport == hslTrue) writeSampleFile.WriteRecord();
         if(l_blnEnableAsp == hslTrue && i_bln_ShowReagentReport == hslTrue) writeReagentFile.WriteRecord();
         if(l_blnEnableAsp == hslTrue || l_blnEnableDisp == hslTrue) writeReportFile.WriteRecord();
    }
    if( 0 != writeErrorFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeErrorFile.RemoveFields();
    if( 0 != writeReagentFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReagentFile.RemoveFields();
    if( 0 != writeSampleFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeSampleFile.RemoveFields();
    if( 0 != writeReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReportFile.RemoveFields();
  }

  private function _ParallelReportMPH96( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_TipPickUpValue3, variable i_str_LiquidClass, variable i_bln_ShowSampleReport, variable i_bln_ShowReagentReport, variable i_str_NameForTransfer ) void {
    if( 0 == t_eventWaitForParallel.WaitEvent(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
    }
    if(t_intForkID != 0) Join(t_intForkID,0);
    t_intForkID = 0;
    t_blnMPH96 = ASWGLOBAL::BOOL::TRUE;
    t_strReportPath = i_str_ReportFilePath;
    t_strAspReturnValue3 = i_str_AspReturnValue3;
    t_strDispReturnValue3 = i_str_DispReturnValue3;
    t_strAspReturnValue4 = i_str_AspReturnValue4;
    t_strDispReturnValue4 = i_str_DispReturnValue4;
    t_strTipPickUpReturn = i_str_TipPickUpValue3;
    t_strLiquidClass = i_str_LiquidClass;
    t_blnShowSampleReport = i_bln_ShowSampleReport;
    t_blnShowReagentReport = i_bln_ShowReagentReport;
    t_strNameForTransfer = i_str_NameForTransfer;
    t_strDeckLayoutFile = DevGetDeckLayoutFileName(Instrument);
    t_intForkID = Fork("_ReportStarter");
  }

  private function _WaitForReport(  ) void {
    if(t_intForkID != 0) Join(t_intForkID,hslInfinite);
    t_intForkID = 0;
  }

  private function _HandleAspirationError( device & ML_STAR, variable i_fltFixedHeightDispense, sequence i_seqDispenseBackLocation ) void {
    private dialog customDialog_9;
    private variable l_fltLiquidHeight;
    private variable l_strLiquidLevel;
    private variable l_blnCoverIsLocked;
    private timer l_hdlTimer;
    private variable l_intDialogReturn;
    private variable l_intDeckID;
    private variable l_strLabID;
    private variable l_intElementID;
    private variable l_strReagentID;
    private dialog customDialog_10;
    if (i_fltFixedHeightDispense < 0.0)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
        	l_strLiquidLevel = arrRetValues[2];
      }
      STAR_CHANNEL_TOOLS::LIQUID_LEVEL_GetLiquidLevelHeight(ML_STAR, l_strLiquidLevel, i_seqDispenseBackLocation, 1, l_fltLiquidHeight);
      l_fltLiquidHeight = l_fltLiquidHeight + 5.0;
    }
    else
    {
      l_fltLiquidHeight = i_fltFixedHeightDispense;
    }
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    l_intDeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
    l_strLabID = SeqGetLabwareId(i_seqDispenseBackLocation);
    l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, l_strLabID);
    l_strReagentID = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
    _UnlockDoor(ML_STAR);
    customDialog_9.InitCustomDialog("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");
    customDialog_9.SetCustomDialogProperty( "textBlock4.Text", l_strReagentID );
    customDialog_9.ShowCustomDialog();
    l_intDialogReturn = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
    _GetDoorCloseStatus(ML_STAR, l_blnCoverIsLocked);
    {
      while (l_blnCoverIsLocked == ASWGLOBAL::BOOL::FALSE)
      {
        customDialog_10.InitCustomDialog("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");
        customDialog_10.ShowCustomDialog();
        l_intDialogReturn = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
        if( 0 == l_hdlTimer.SetTimer(0.5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == l_hdlTimer.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _GetDoorCloseStatus(ML_STAR, l_blnCoverIsLocked);
      }
    }
    _LockDoor(ML_STAR);
  }

  private function _GetDoorCloseStatus( device & ML_STAR, variable & o_blnDoorStatus ) void {
    private variable _strCoverIsLocked;
    private variable _boolCoverIsLocked;
    private variable _strFwRet;
    o_blnDoorStatus = 0;
    o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
    if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	_strFwRet = arrRetValues[3];
      }
      _strCoverIsLocked = StrRight(_strFwRet, 1);
      _boolCoverIsLocked = StrIVal(_strCoverIsLocked);
      if (_boolCoverIsLocked == 1)
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	_strFwRet = arrRetValues[3];
      }
      _strCoverIsLocked = StrRight(_strFwRet, 1);
      _boolCoverIsLocked = StrIVal(_strCoverIsLocked);
      if (_boolCoverIsLocked == 1)
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	_strFwRet = arrRetValues[3];
      }
      _strCoverIsLocked = StrRight(_strFwRet, 1);
      _boolCoverIsLocked = StrIVal(_strCoverIsLocked);
      if (_boolCoverIsLocked == 1)
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        o_blnDoorStatus = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_13 == ASWGLOBAL::BOOL::TRUE)
    {
      o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
    }
    if (DATA_CONTROLLER::SYSTEM::IS_VANTAGE_20 == ASWGLOBAL::BOOL::TRUE)
    {
      o_blnDoorStatus = ASWGLOBAL::BOOL::TRUE;
    }
  }

  private function _UnlockDoor( device & ML_STAR ) void {
    if(0){
      if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Disable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Disable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Disable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    MECC::TraceComment(Translate("Unlock Doors"));
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  }

  private function _LockDoor( device & ML_STAR ) void {
    MECC::TraceComment(Translate("Lock Doors"));
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    if(0){
      if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Re-Enable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Re-Enable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Re-Enable Door lock monitoring"));
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
  }

  private function _HandleAspirationErrorMPH96( device & ML_STAR, variable i_strReturnFromPickUp, variable i_strReturnFromAspiration, variable i_fltFixedHeightDispense, sequence i_seqDispenseBackLocation ) void {
    private dialog customDialog_11;
    private dialog customDialog_12;
    private variable l_fltLiquidHeight;
    private variable l_strReagentID;
    private variable l_blnCoverIsLocked;
    private variable l_intDeckID;
    private variable l_strLabID;
    private variable l_intElementID;
    private timer l_hdlTimer;
    private variable l_intDialogReturn;
    if (i_fltFixedHeightDispense < 0.0)
    {
      l_fltLiquidHeight = 5.0;
    }
    else
    {
      l_fltLiquidHeight = i_fltFixedHeightDispense;
    }
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    l_intDeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
    l_strLabID = SeqGetLabwareId(i_seqDispenseBackLocation);
    l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, l_strLabID);
    l_strReagentID = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
    _UnlockDoor(ML_STAR);
    customDialog_11.InitCustomDialog("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");
    customDialog_11.SetCustomDialogProperty( "textBlock4.Text", l_strReagentID );
    customDialog_11.ShowCustomDialog();
    l_intDialogReturn = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
    _GetDoorCloseStatus(ML_STAR, l_blnCoverIsLocked);
    {
      while (l_blnCoverIsLocked == ASWGLOBAL::BOOL::FALSE)
      {
        customDialog_12.InitCustomDialog("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");
        customDialog_12.ShowCustomDialog();
        l_intDialogReturn = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
        if( 0 == l_hdlTimer.SetTimer(0.5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == l_hdlTimer.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _GetDoorCloseStatus(ML_STAR, l_blnCoverIsLocked);
      }
    }
    _LockDoor(ML_STAR);
  }

  function LOAD_ReloadTips( device & ML_STAR ) void {
    private dialog customDialog_13;
    private dialog customDialog_14;
    private variable l_strTracksDescription;
    private variable l_intCarrierCheck;
    private variable l_strSite2;
    private variable l_strBarcodeMasks;
    private variable l_strSite3;
    private variable l_intLeftTrack;
    private variable l_strBarcode;
    private variable l_strSite4;
    private variable l_strCarrierMask;
    private variable l_intLineIndex;
    private variable l_intTotalCarriers;
    private variable l_strSite5;
    private variable l_strBarcodeScanned;
    private variable l_strCarrierLabelName;
    private variable l_strIndex;
    private variable l_blnEnable1;
    private variable l_intTotalTracks;
    private variable l_intCurrentTipPosition;
    private variable l_strBarcodePositions;
    private variable l_intRightTrack;
    private variable l_blnEnable2;
    private variable l_intIndex;
    private variable l_strPlateDescription;
    private variable l_blnEnable3;
    private variable l_strBarcode1;
    private variable l_strSitesToScan;
    private variable l_strBarcode2;
    private variable l_blnFileExists;
    private variable l_strCarrier;
    private variable l_blnEnable4;
    private variable l_strBarcode3;
    private variable l_intCarrierIndex;
    private variable l_blnEnable5;
    private variable l_intDeckID;
    private variable l_strBarcode4;
    private variable l_strBarcodeMask;
    private variable l_strBarcode5;
    private variable l_strLabID;
    private variable l_intPlatesScanned;
    private variable l_intTotalLabware;
    private variable l_intPlateIndex;
    private variable l_strCarrierSite;
    private variable l_strCarrierToLoad;
    private variable l_strSite1;
    private variable l_intTipType;
    private variable l_intElementID;
    private variable l_blnLabwareValid;
    private sequence l_seqPositionsToLoad;
    private variable l_arrBarcodeMasks[];
    private variable l_arrBarcodesScanned[];
    private variable l_arrLabwareToLoad[];
    private variable l_arrCarriers[];
    private variable l_arrLabwareIDs[];
    private variable l_arrLabwareVisState[];
    private variable l_arrLabware[];
    private variable l_intDialogReturn;
    private dialog customDialog_15;
    private variable l_blnDoorClosed;
    private timer l_hdlTimer;
    private variable l_intTotalTips;
    private variable l_intRemainderTips;
    private variable l_strFunctionName;
    private variable l_strCarrierInfo;
    l_intCurrentTipPosition = DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION.GetCurrentPosition();
    if (DATA_CONTROLLER::PROCESS::SETUP_RANGE == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    if (l_intCurrentTipPosition != 0)
    {
      return;
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    _UpdateStatus(Translate("Reload tips..."), ASWGLOBAL::BOOL::FALSE);
    _UnlockDoor(ML_STAR);
    l_strPlateDescription = Translate("Fresh Artel Plate");
    l_intDeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
    SeqRemoveAll(l_seqPositionsToLoad);
    if (DATA_CONTROLLER::PROCESS::SETUP_CHANNELS == ASWGLOBAL::BOOL::TRUE)
    {
      STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_SAMPLES, -1);
      STAR_TIP_TOOLS::TipCheck(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_SAMPLES, DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE_RELOAD);
    }
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalTips = SeqGetTotal(DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION);
      if (DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE_RELOAD > l_intTotalTips)
      {
        l_intRemainderTips = DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE_RELOAD - l_intTotalTips;
      }
      STAR_TIP_TOOLS::TipCounter_SetShow(ML_STAR, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, DATA_CONTROLLER::STR::TIP_COUNTER::TIPS_SAMPLES, -1, 1, DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE_RELOAD);
      DATA_CONTROLLER::INT::TIPS_NEEDED_RANGE_RELOAD = l_intRemainderTips;
    }
    l_seqPositionsToLoad = HSLExtensions::Sequence::Concat(l_seqPositionsToLoad, DATA_CONTROLLER::SEQ::TIPS_RANGE_ADDITION, ASWGLOBAL::BOOL::FALSE);
    SeqGetLabwareIds(l_seqPositionsToLoad, l_arrLabwareIDs);
    l_intTotalLabware=l_arrLabwareIDs.GetSize();
    l_arrCarriers.SetSize(0);
    {
      for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
      {
        l_intIndex = l_intIndex + 1;
        l_strLabID=l_arrLabwareIDs.GetAt(l_intIndex-1);
        _GetCarrierAndSiteID(ML_STAR, l_strLabID, l_strCarrier, l_strCarrierSite);
        l_intCarrierCheck = _Lookup(l_arrCarriers, l_strCarrier);
        if (l_intCarrierCheck == 0)
        {
          l_arrCarriers.AddAsLast(l_strCarrier);
        }
      }
    }
    Util2::Debug::TraceArray(Translate("Unique Carriers"), l_arrCarriers);
    l_intTotalCarriers=l_arrCarriers.GetSize();
    l_arrBarcodesScanned.SetSize(0);
    {
      for(l_intCarrierIndex = 0; l_intCarrierIndex < l_intTotalCarriers;)
      {
        l_intCarrierIndex = l_intCarrierIndex + 1;
        l_arrBarcodeMasks.SetSize(0);
        l_strCarrierToLoad=l_arrCarriers.GetAt(l_intCarrierIndex-1);
        _GetCarrierTracks(ML_STAR, l_strCarrierToLoad, l_intTotalTracks, l_intLeftTrack, l_intRightTrack);
        l_strTracksDescription = StrConcat4(Translate(""), l_intLeftTrack, Translate(" - "), l_intRightTrack);
        l_strCarrierLabelName = DevGetLabwareData(ML_STAR, l_strCarrierToLoad, Translate("MlStarCarLabelName"));
        DevGetBarcodeData(ML_STAR, l_strCarrierToLoad, Translate(""), l_strCarrierMask);
        l_strSitesToScan = Translate("");
        l_strSite1 = Translate("Empty");
        l_strSite2 = Translate("Empty");
        l_strSite3 = Translate("Empty");
        l_strSite4 = Translate("Empty");
        l_strSite5 = Translate("Empty");
        l_strBarcode1 = Translate("");
        l_strBarcode2 = Translate("");
        l_strBarcode3 = Translate("");
        l_strBarcode4 = Translate("");
        l_strBarcode5 = Translate("");
        l_arrLabwareToLoad.SetSize(5);
        l_arrLabwareToLoad.SetAt(1-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(2-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(3-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(4-1, Translate("EMPTY"));
        l_arrLabwareToLoad.SetAt(5-1, Translate("EMPTY"));
        l_strBarcode1 = Translate("111111111111111111");
        l_strBarcode2 = Translate("111111111111111111");
        l_strBarcode3 = Translate("111111111111111111");
        l_strBarcode4 = Translate("111111111111111111");
        l_strBarcode5 = Translate("111111111111111111");
        l_blnEnable1 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable2 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable3 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable4 = ASWGLOBAL::BOOL::FALSE;
        l_blnEnable5 = ASWGLOBAL::BOOL::FALSE;
        l_arrLabware.SetSize(0);
        l_arrLabwareVisState.SetSize(0);
        {
          for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
          {
            l_intIndex = l_intIndex + 1;
            l_strLabID=l_arrLabwareIDs.GetAt(l_intIndex-1);
            _GetCarrierAndSiteID(ML_STAR, l_strLabID, l_strCarrier, l_strCarrierSite);
            if (l_strCarrier == l_strCarrierToLoad)
            {
              TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Labware:  "), l_strLabID, Translate(""));
              l_intTipType = DevGetLabwareData(ML_STAR, l_strLabID, Translate("MlStarTipRack"));
              DevGetBarcodeData(ML_STAR, l_strLabID, Translate(""), l_strBarcodeMask);
              l_arrBarcodeMasks.AddAsLast(l_strBarcodeMask);
              l_strSitesToScan = StrConcat4(l_strSitesToScan, l_strCarrierSite, Translate(""), Translate(""));
              if (l_intIndex < l_intTotalLabware)
              {
                l_strSitesToScan = StrConcat4(l_strSitesToScan, Translate(","), Translate(""), Translate(""));
              }
              if (l_strCarrierSite == "1")
              {
                _GetTipDescription(l_intTipType, l_strSite1);
                l_arrLabwareToLoad.SetAt(1-1, l_strLabID);
                l_blnEnable1 = ASWGLOBAL::BOOL::TRUE;
                l_arrLabware.AddAsLast(l_strLabID);
                l_arrLabwareVisState.AddAsLast(5);
              }
              if (l_strCarrierSite == "2")
              {
                _GetTipDescription(l_intTipType, l_strSite2);
                l_arrLabwareToLoad.SetAt(2-1, l_strLabID);
                l_blnEnable2 = ASWGLOBAL::BOOL::TRUE;
                l_arrLabware.AddAsLast(l_strLabID);
                l_arrLabwareVisState.AddAsLast(5);
              }
              if (l_strCarrierSite == "3")
              {
                _GetTipDescription(l_intTipType, l_strSite3);
                l_arrLabwareToLoad.SetAt(3-1, l_strLabID);
                l_blnEnable3 = ASWGLOBAL::BOOL::TRUE;
                l_arrLabware.AddAsLast(l_strLabID);
                l_arrLabwareVisState.AddAsLast(5);
              }
              if (l_strCarrierSite == "4")
              {
                _GetTipDescription(l_intTipType, l_strSite4);
                l_arrLabwareToLoad.SetAt(4-1, l_strLabID);
                l_blnEnable4 = ASWGLOBAL::BOOL::TRUE;
                l_arrLabware.AddAsLast(l_strLabID);
                l_arrLabwareVisState.AddAsLast(5);
              }
              if (l_strCarrierSite == "5")
              {
                _GetTipDescription(l_intTipType, l_strSite5);
                l_arrLabwareToLoad.SetAt(5-1, l_strLabID);
                l_blnEnable5 = ASWGLOBAL::BOOL::TRUE;
                l_arrLabware.AddAsLast(l_strLabID);
                l_arrLabwareVisState.AddAsLast(5);
              }
            }
          }
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier to Load:  "), l_strCarrierToLoad, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Sites to Load:  "), l_strSitesToScan, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier Label Name:  "), l_strCarrierLabelName, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Carrier Mask:  "), l_strCarrierMask, Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Tracks to load:  "), l_strTracksDescription, Translate(""));
        l_strCarrierInfo = StrConcat4(l_strCarrierLabelName, Translate(" :: Track "), l_strTracksDescription, Translate(""));
        _UpdateStatus(l_strCarrierInfo, ASWGLOBAL::BOOL::TRUE);
        if (DATA_CONTROLLER::SYSTEM::AUTOLOAD == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
          if (DATA_CONTROLLER::SYSTEM::IS_STAR == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          }
          if (DATA_CONTROLLER::SYSTEM::IS_STARLET == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          }
          if (DATA_CONTROLLER::SYSTEM::IS_STARPLUS == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          }
          customDialog_14.InitCustomDialog("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");
          customDialog_14.SetCustomDialogProperty( "textBlock7.Text", l_strCarrierLabelName );
          customDialog_14.SetCustomDialogProperty( "textBlock3.Text", l_strSite1 );
          customDialog_14.SetCustomDialogProperty( "textBlock4.Text", l_strSite2 );
          customDialog_14.SetCustomDialogProperty( "textBlock5.Text", l_strSite3 );
          customDialog_14.SetCustomDialogProperty( "textBlock6.Text", l_strSite4 );
          customDialog_14.SetCustomDialogProperty( "textBlock8.Text", l_strSite5 );
          customDialog_14.SetCustomDialogProperty( "textBlock9.Text", l_strTracksDescription );
          customDialog_14.ShowCustomDialog();
          l_intDialogReturn = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strBarcodeScanned = arrRetValues[3];
            	l_strBarcodeMasks = arrRetValues[4];
            	l_strBarcodePositions = arrRetValues[5];
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Barcode Scanned:  "), l_strBarcodeScanned, Translate(""));
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Barcode Masks:  "), l_strBarcodeMasks, Translate(""));
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Barcode Positions:  "), l_strBarcodePositions, Translate(""));
          l_intTotalLabware=l_arrLabwareToLoad.GetSize();
          {
            for(l_intIndex = 0; l_intIndex < l_intTotalLabware;)
            {
              l_intIndex = l_intIndex + 1;
              l_blnLabwareValid = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, l_arrLabwareToLoad.ElementAt( l_intIndex -1));
              if (l_blnLabwareValid == ASWGLOBAL::BOOL::TRUE)
              {
                if (DATA_CONTROLLER::BLN::SIMULATION_MODE == ASWGLOBAL::BOOL::TRUE)
                {
                  l_strIndex = StrConcat2(l_intIndex, Translate(""));
                  DevGetBarcodeData(ML_STAR, l_arrLabwareToLoad.ElementAt( l_intIndex -1), Translate(""), l_strBarcodeMask);
                  StrReplace(l_strBarcodeMask, Translate("*"), l_strIndex);
                  Util2::VarArrCheckIndex(l_arrLabwareToLoad, l_intIndex, "l_arrLabwareToLoad");
                  STCC::SetElementBarcode(ML_STAR, l_arrLabwareToLoad.ElementAt(l_intIndex-1), "", l_strBarcodeMask);
                }
                l_intElementID = VectorDb_Labware::GetElementIDByDeckIDLabwareId(l_intDeckID, l_arrLabwareToLoad.ElementAt( l_intIndex -1));
                if (l_intElementID != 0)
                {
                  l_strBarcode = VectorDb_Labware::GetLabwareBarcodeByElementID(l_intElementID);
                  l_arrBarcodesScanned.AddAsLast(l_strBarcode);
                }
              }
            }
          }
        }
        else
        {
          Util2::Debug::TraceArray(Translate("Labware to Load"), l_arrLabwareToLoad);
          l_arrLabware.SetSize(0);
          l_arrLabwareVisState.SetSize(0);
          if (l_blnEnable1 == ASWGLOBAL::BOOL::TRUE)
          {
            l_strBarcode1 = Translate("");
          }
          if (l_blnEnable2 == ASWGLOBAL::BOOL::TRUE)
          {
            l_strBarcode2 = Translate("");
          }
          if (l_blnEnable3 == ASWGLOBAL::BOOL::TRUE)
          {
            l_strBarcode3 = Translate("");
          }
          if (l_blnEnable4 == ASWGLOBAL::BOOL::TRUE)
          {
            l_strBarcode4 = Translate("");
          }
          if (l_blnEnable5 == ASWGLOBAL::BOOL::TRUE)
          {
            l_strBarcode5 = Translate("");
          }
          DeckVisualize::UpdateLoadedLabware(ML_STAR, l_arrLabware, l_arrLabwareVisState, Translate(""));
          customDialog_13.InitCustomDialog("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");
          customDialog_13.SetCustomDialogProperty( "textBlock7.Text", l_strCarrierLabelName );
          customDialog_13.SetCustomDialogProperty( "textBlock3.Text", l_strSite1 );
          customDialog_13.SetCustomDialogProperty( "textBlock4.Text", l_strSite2 );
          customDialog_13.SetCustomDialogProperty( "textBlock5.Text", l_strSite3 );
          customDialog_13.SetCustomDialogProperty( "textBlock6.Text", l_strSite4 );
          customDialog_13.SetCustomDialogProperty( "textBlock8.Text", l_strSite5 );
          customDialog_13.SetCustomDialogProperty( "textBox1.IsVisible", l_blnEnable1 );
          customDialog_13.SetCustomDialogProperty( "textBox1.Text", l_strBarcode1 );
          customDialog_13.SetCustomDialogProperty( "textBox2.IsVisible", l_blnEnable2 );
          customDialog_13.SetCustomDialogProperty( "textBox2.Text", l_strBarcode2 );
          customDialog_13.SetCustomDialogProperty( "textBox3.IsVisible", l_blnEnable3 );
          customDialog_13.SetCustomDialogProperty( "textBox3.Text", l_strBarcode3 );
          customDialog_13.SetCustomDialogProperty( "textBox4.IsVisible", l_blnEnable4 );
          customDialog_13.SetCustomDialogProperty( "textBox4.Text", l_strBarcode4 );
          customDialog_13.SetCustomDialogProperty( "textBox5.IsVisible", l_blnEnable5 );
          customDialog_13.SetCustomDialogProperty( "textBox5.Text", l_strBarcode5 );
          customDialog_13.SetCustomDialogProperty( "textBlock10.Text", l_strTracksDescription );
          customDialog_13.ShowCustomDialog();
          l_intDialogReturn = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
          l_strBarcode1 = customDialog_13.GetCustomDialogProperty( "textBox1.Text" );
          l_strBarcode2 = customDialog_13.GetCustomDialogProperty( "textBox2.Text" );
          l_strBarcode3 = customDialog_13.GetCustomDialogProperty( "textBox3.Text" );
          l_strBarcode4 = customDialog_13.GetCustomDialogProperty( "textBox4.Text" );
          l_strBarcode5 = customDialog_13.GetCustomDialogProperty( "textBox5.Text" );
          if (l_blnEnable1 == ASWGLOBAL::BOOL::TRUE)
          {
            l_strLabID=l_arrLabwareToLoad.GetAt(1-1);
            STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode1);
            l_arrLabware.AddAsLast(l_strLabID);
            l_arrLabwareVisState.AddAsLast(1);
            l_arrBarcodesScanned.AddAsLast(l_strBarcode1);
          }
          if (l_blnEnable2 == ASWGLOBAL::BOOL::TRUE)
          {
            l_strLabID=l_arrLabwareToLoad.GetAt(2-1);
            STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode2);
            l_arrLabware.AddAsLast(l_strLabID);
            l_arrLabwareVisState.AddAsLast(1);
            l_arrBarcodesScanned.AddAsLast(l_strBarcode2);
          }
          if (l_blnEnable3 == ASWGLOBAL::BOOL::TRUE)
          {
            l_strLabID=l_arrLabwareToLoad.GetAt(3-1);
            STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode3);
            l_arrLabware.AddAsLast(l_strLabID);
            l_arrLabwareVisState.AddAsLast(1);
            l_arrBarcodesScanned.AddAsLast(l_strBarcode3);
          }
          if (l_blnEnable4 == ASWGLOBAL::BOOL::TRUE)
          {
            l_strLabID=l_arrLabwareToLoad.GetAt(4-1);
            STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode4);
            l_arrLabware.AddAsLast(l_strLabID);
            l_arrLabwareVisState.AddAsLast(1);
            l_arrBarcodesScanned.AddAsLast(l_strBarcode4);
          }
          if (l_blnEnable5 == ASWGLOBAL::BOOL::TRUE)
          {
            l_strLabID=l_arrLabwareToLoad.GetAt(5-1);
            STCC::SetElementBarcode(ML_STAR, l_strLabID, "", l_strBarcode5);
            l_arrLabware.AddAsLast(l_strLabID);
            l_arrLabwareVisState.AddAsLast(1);
            l_arrBarcodesScanned.AddAsLast(l_strBarcode5);
          }
          DeckVisualize::UpdateLoadedLabware(ML_STAR, l_arrLabware, l_arrLabwareVisState, Translate(""));
        }
      }
    }
    l_blnFileExists = HSLExtensions::File::Exists(DATA_CONTROLLER::STR::FILE::REPORT_FILE_TEMPLATE);
    if (l_blnFileExists == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
    l_intPlatesScanned=l_arrBarcodesScanned.GetSize();
    ExcelEdit::OpenFile(DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, Translate("CoverSheet"));
    l_intLineIndex = DATA_CONTROLLER::INT::TIP_FILE_LINE;
    {
      for(l_intPlateIndex = 0; l_intPlateIndex < l_intPlatesScanned;)
      {
        l_intPlateIndex = l_intPlateIndex + 1;
        ExcelEdit::UpdateCell(8, l_intLineIndex, l_arrBarcodesScanned.ElementAt( l_intPlateIndex -1), ExcelEdit::CELL_TYPE::STRING);
        l_intLineIndex = l_intLineIndex + 1;
      }
    }
    ExcelEdit::CloseFile();
    _GetDoorCloseStatus(ML_STAR, l_blnDoorClosed);
    {
      while (l_blnDoorClosed == ASWGLOBAL::BOOL::FALSE)
      {
        customDialog_15.InitCustomDialog("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");
        customDialog_15.ShowCustomDialog();
        l_intDialogReturn = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
        if( 0 == l_hdlTimer.SetTimer(0.5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == l_hdlTimer.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _GetDoorCloseStatus(ML_STAR, l_blnDoorClosed);
      }
    }
    _LockDoor(ML_STAR);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }

  private function _GetCarrierAndSiteID( device & Instrument, variable i_strLabwareID, variable & o_str_TemplateID, variable & o_str_TemplateSiteID ) void {
    private variable str_LabID;
    o_str_TemplateID = 0;
    o_str_TemplateSiteID = 0;
    str_LabID = i_strLabwareID;
    o_str_TemplateID = Translate("");
    o_str_TemplateSiteID = Translate("");
    {
        object obj_Decklayout;
        obj_Decklayout = Instrument.GetDeckLayoutObject();
        if (!obj_Decklayout.IsNull())
            {
                  object EditDecklayout5;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  variable Array_Keys[];
                  variable intCounter;
                  obj_Decklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  obj_Decklayout.TemplateLabwareNames(LabwareObjects);
                  Array_Keys = LabwareObjects.GetKeys();
                  for(intCounter=1; intCounter<=Array_Keys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      if(LabwareNames.Item1("Labwr_Id") == str_LabID)
                      {
                          o_str_TemplateSiteID = LabwareNames.Item1("Labwr_DkSiteId");
                          o_str_TemplateID = LabwareNames.Item1("Labwr_TemplateId");
                      }
                  }
                  obj_Decklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  Parameter.ReleaseObject();
                  LabwareObjects.ReleaseObject();
                  LabwareNames.ReleaseObject();
           }
    }
  }

  private function _Lookup( variable & array[], variable item ) variable {
    private variable index;
    private variable lookupreturn;
    lookupreturn = Util::Lookup(array, item, index);
    if (lookupreturn > 0)
    {
      index = index + 1;
      return (index);
    }
    else
    {
      return (0);
    }
  }

  private function _GetCarrierTracks( device & Instrument, variable i_strLabwareID, variable & o_int_TotalTracks, variable & o_int_LeftMostTrack, variable & o_int_RightMostTrack ) void {
    private variable flt_X_Coord;
    private variable flt_Z_Coord;
    private variable flt_Y_Coord;
    private variable int_NumberOfTracks;
    o_int_TotalTracks = 0;
    o_int_LeftMostTrack = 0;
    o_int_RightMostTrack = 0;
    o_int_LeftMostTrack = 0;
    o_int_RightMostTrack = 0;
    o_int_TotalTracks = 0;
    int_NumberOfTracks = DevGetLabwareData(Instrument, i_strLabwareID, Translate("MlStarCarWidthAsT"));
    if (int_NumberOfTracks != "")
    {
      _ConvertToInteger(int_NumberOfTracks, o_int_TotalTracks);
      _GetTemplateOrigin2(Instrument, i_strLabwareID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord);
      flt_X_Coord = flt_X_Coord - 77.5;
      o_int_LeftMostTrack = flt_X_Coord / (22.5 * 1.0);
      _ConvertToInteger(o_int_LeftMostTrack, o_int_LeftMostTrack);
      o_int_RightMostTrack = o_int_LeftMostTrack + o_int_TotalTracks;
      _ConvertToInteger(o_int_RightMostTrack, o_int_RightMostTrack);
      o_int_RightMostTrack = o_int_RightMostTrack - 1;
    }
  }

  private function _ConvertToInteger( variable iVariable, variable & oVariable ) void {
    private variable str_Variable;
    oVariable = 0;
    str_Variable = StrConcat2(iVariable, Translate(""));
    oVariable = StrIVal(str_Variable);
  }

  private function _GetTemplateOrigin2( device & Instrument, variable i_str_TemplateLabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void {
    private variable flt_NotUsed;
    o_flt_X_Coord = 0;
    o_flt_Y_Coord = 0;
    o_flt_Z_Coord = 0;
    o_flt_X_Coord = 0.0;
    o_flt_Y_Coord = 0.0;
    o_flt_Z_Coord = 0.0;
    DevGetLabwarePosition(Instrument, i_str_TemplateLabID, o_flt_X_Coord, o_flt_Y_Coord, o_flt_Z_Coord, flt_NotUsed);
  }

  private function _GetTipDescription( variable i_intTipType, variable & o_strTipName ) void {
    private variable l_strTipType;
    o_strTipName = 0;
    l_strTipType = StrConcat2(i_intTipType, Translate(""));
    o_strTipName = Translate("Empty");
    if (l_strTipType == "0")
    {
      o_strTipName = Translate("300 µL Tips");
    }
    if (l_strTipType == "1")
    {
      o_strTipName = Translate("300 µLTips");
    }
    if (l_strTipType == "22")
    {
      o_strTipName = Translate("50 µL Tips");
    }
    if (l_strTipType == "23")
    {
      o_strTipName = Translate("50 µL Tips");
    }
    if (l_strTipType == "4")
    {
      o_strTipName = Translate("1000 µL Tips");
    }
    if (l_strTipType == "5")
    {
      o_strTipName = Translate("1000 µL Tips");
    }
  }

  private function _MakePlateBlink( device & ML_STAR, variable i_strLabID ) void {
    private variable l_arrLabID[];
    private variable l_arrState[];
    l_arrLabID.SetSize(0);
    l_arrState.SetSize(0);
    l_arrLabID.AddAsLast(i_strLabID);
    l_arrState.AddAsLast(5);
    DeckVisualize::UpdateLoadedLabware(ML_STAR, l_arrLabID, l_arrState, Translate("make labware flash"));
  }

  private function _UpdateStatus( variable i_strText, variable i_blnIndentText ) void {
    if (i_blnIndentText == ASWGLOBAL::BOOL::TRUE)
    {
      i_strText = StrConcat2(Translate("\t"), i_strText);
    }
    AswStatusDialog::AppendText(i_strText);
  }

  function MPH_AddBaseLine( device & ML_STAR ) void {
    private variable l_intVolume;
    private variable l_strCurrentDay;
    private variable l_fltLiquidHeight;
    private variable l_intTotalChannels;
    private variable l_strReturn4Pip;
    private variable l_strReturn3Pip;
    private variable l_intWellsPerRange;
    private variable l_strReturn3Disp;
    private variable l_strVolumeDescription;
    private variable l_intReplicates;
    private variable l_strReturn3Tip;
    private variable l_strReturn4Disp;
    private variable l_intPositionStart;
    private variable loopCounter1;
    private variable l_fltDispenseHeight;
    private variable l_fltBase;
    private variable l_strLabID;
    private variable l_strLiquidClass;
    private variable l_strReagentDescription;
    private variable l_strFunctionName;
    private sequence l_seqPipettingPositions;
    private variable l_intIndex;
    private variable l_strPlateDescription;
    if (DATA_CONTROLLER::PROCESS::SETUP_MPH == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    if (DATA_CONTROLLER::PROCESS::PREPARE_VERIFICATION_PLATE == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    {
         variable _intLength(0);
         string _strTmp;
         _strTmp = GetFunctionName();
         _intLength = _strTmp.GetLength();
         l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigMethodSettings"));
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("LiquidClassBaselineMPH"), l_strLiquidClass);
    CONFIGURATIONEDITOR::GetConfigurationValue(Translate("MPHBase"), l_fltBase);
    if (DATA_CONTROLLER::BLN::OVERIDE_REPLICATES == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReplicates = DATA_CONTROLLER::INT::REPLICATE_NUMBER;
    }
    _GetContainerDepth(ML_STAR, DATA_CONTROLLER::SEQ::PLATES, l_fltDispenseHeight);
    l_fltDispenseHeight = l_fltDispenseHeight - 3.0;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~ l_fltDispenseHeight = "), l_fltDispenseHeight);
    l_intTotalChannels = StrReplace(DATA_CONTROLLER::STR::PROCESS_CHANNEL_PATTERN, Translate("1"), Translate("1"));
    l_intWellsPerRange = 96;
    l_intVolume = MthCeiling(l_fltBase);
    l_strVolumeDescription = StrConcat2(l_intVolume, Translate(" µL"));
    l_strReagentDescription = StrConcat4(Translate("Add baseline reagent "), l_strVolumeDescription, Translate("..."), Translate(""));
    _UpdateStatus(l_strReagentDescription, ASWGLOBAL::BOOL::FALSE);
    l_strReturn3Tip = _PickUpTipsMPH96(ML_STAR, 0);
    _UpdateStatus(Translate("Pre-wet tips"), ASWGLOBAL::BOOL::TRUE);
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        onerror goto errLabel_16 ;
        err.Clear();
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          	l_strReturn3Pip = arrRetValues[2];
          	l_strReturn4Pip = arrRetValues[3];
        }
        STAR_MPH96_TOOLS::TOOL_GetLiquidLevelHeight(ML_STAR, l_strReturn3Tip, l_strReturn3Pip, l_fltLiquidHeight);
        l_fltLiquidHeight = l_fltLiquidHeight + 5.0;
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          	l_strReturn3Disp = arrRetValues[2];
          	l_strReturn4Disp = arrRetValues[3];
        }
        break;
        errLabel_16 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          _HandleAspirationErrorMPH96(ML_STAR, l_strReturn3Pip, l_strReturn3Tip, -1, DATA_CONTROLLER::SEQ::REAGENT_BASELINE);
        }   /* end if from skip handler if no error */
      }
    }
    l_strLabID = SeqGetLabwareId(DATA_CONTROLLER::SEQ::PLATES);
    SeqIncrement(DATA_CONTROLLER::SEQ::PLATES, 384);
    l_intPositionStart = 1;
    _GetSequenceForPipettingMPH(l_strLabID, l_seqPipettingPositions);
    {
      for(loopCounter1 = 0; loopCounter1 < l_intReplicates;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_strPlateDescription = StrConcat4(Translate("Quadrant "), l_intIndex, Translate(" : "), l_intReplicates);
        _UpdateStatus(Translate("Plate 1 / 1"), ASWGLOBAL::BOOL::TRUE);
        {
          while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
          {
            onerror goto errLabel_17 ;
            err.Clear();
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
              	l_strReturn3Pip = arrRetValues[2];
              	l_strReturn4Pip = arrRetValues[3];
            }
            break;
            errLabel_17 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _HandleAspirationErrorMPH96(ML_STAR, l_strReturn3Pip, l_strReturn3Tip, -1, DATA_CONTROLLER::SEQ::REAGENT_BASELINE);
            }   /* end if from skip handler if no error */
          }
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          	l_strReturn3Disp = arrRetValues[2];
          	l_strReturn4Disp = arrRetValues[3];
        }
        _ParallelReportMPH96(ML_STAR, DATA_CONTROLLER::STR::FILE::LOCAL_REPORT_FILE, l_strReturn3Pip, l_strReturn4Pip, l_strReturn3Disp, l_strReturn4Disp, l_strReturn3Tip, l_strLiquidClass, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, Translate("Baseline"));
      }
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    l_strLabID = SeqGetLabwareId(l_seqPipettingPositions);
    _MakePlateBlink(ML_STAR, l_strLabID);
    _WaitForReport();
    l_strCurrentDay = TimGetFormattedDate(Translate("%m/%d/%Y"));
    CONFIGURATIONEDITOR::SetConfigurationFile(Translate("ConfigRunSelections"));
    CONFIGURATIONEDITOR::SetConfigurationValue(Translate("DateBaseline"), l_strCurrentDay, ASWGLOBAL::BOOL::FALSE);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  }
} // library namespace
