#pragma once
#include "HSLSeqLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLMappingReport.hsl"
#include "HSLStrLib.hsl"
#include "HSLUtilLib2.hsl"
#include "lookup.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace SEQUENCETOOLS_V3 {
  function GetTipTypeFromSequence( sequence & iTipSequence, variable & oTipType ) void ;
  function MergeUpTo4Sequences( device & ML_STAR, sequence & InputSequence1, sequence & InputSequence2, sequence & InputSequence3, sequence & InputSequence4, sequence & OutputSequence, variable NumberOfSequencesToMerge, variable SortOutputSequence ) void ;
  function ShortenSequenceLinewiseOn96Plate( sequence & iSeqToShortenLinewise, variable iNumOfSamples, variable & oChannelPattern, device & ML_STAR ) void ;
  function SortOneSequenceAndOneVolumeForChannels( sequence & sequence_for_sorting, variable & array_volume[], device & ML_STAR ) void ;
  function SortSequenceForChannels( sequence & sequence_for_sorting, device & ML_STAR ) void ;
  function SortSequencePlatewise( device & ML_STAR, sequence & sequence_for_sorting ) void ;
  function SortTwoSequencesAndOneVolumeForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], device & ML_STAR ) void ;
  function SortTwoSequencesAndTwoVolumesForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_volume2[], device & ML_STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOOKUP::_InitLibrary();
  }
  function _ExitLibrary() {
    LOOKUP::_ExitLibrary();
  }

  function SortSequencePlatewise( device & ML_STAR, sequence & sequence_for_sorting ) void {
    private variable loopCounter11;
    private variable sql_statement;
    private variable asp_angle;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable seq_sort_file;
    private variable asp_x_coord;
    private variable asp_y_coord;
    private variable asp_z_coord;
    private file seq_sort;
    private variable loopCounter1;
    seq_sort_file = "C:\\temp\\seq_sort_file.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeError(-1523711744, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY asp_lab_id ASC, asp_x_coord ASC, asp_y_coord DESC";
    TrcTrace(Translate("sql_statement = "), sql_statement);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeError(-1523711744, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    SeqRemoveAll(sequence_for_sorting);
    {
      loopCounter11 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter11 = loopCounter11 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeError(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    HSLMapReport::DeleteFile(seq_sort_file);
    sequence_for_sorting.SetCurrentPosition(1);
  }

  function ShortenSequenceLinewiseOn96Plate( sequence & iSeqToShortenLinewise, variable iNumOfSamples, variable & oChannelPattern, device & ML_STAR ) void {
    private variable loopCounter1;
    private variable temporaryFile;
    private variable file_PosID;
    private variable loopCounter2;
    private variable file_labID;
    private file tempFile;
    private variable file_LineID;
    private variable file_LineIDAsNumber;
    private variable loopCounter3;
    oChannelPattern = 0;
    temporaryFile = Translate("C:\\temp\\Temp.xls");
    HSLMapReport::DeleteFile(temporaryFile);
    tempFile.AddField("LabwareID", file_labID, hslString, 255);
    tempFile.AddField("PositionID", file_PosID, hslString, 255);
    if( 0 == tempFile.Open(temporaryFile + " " + "Tabelle1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, temporaryFile, "HxMetEdCompCmd");
    }
    iSeqToShortenLinewise.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (iSeqToShortenLinewise.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, iSeqToShortenLinewise, 1);
        loopCounter1 = loopCounter1 + 1;
        file_labID = SeqGetLabwareId(iSeqToShortenLinewise);
        file_PosID = SeqGetPositionId(iSeqToShortenLinewise);
        file_LineID = StrLeft(file_PosID, 1);
        file_LineIDAsNumber = StrStrToAscii(file_LineID);
        file_LineIDAsNumber = file_LineIDAsNumber - 64;
        if (file_LineIDAsNumber <= iNumOfSamples)
        {
          if( 0 == tempFile.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        SeqIncrement(iSeqToShortenLinewise, 1);
        if (
           (iSeqToShortenLinewise.GetCurrentPosition() > 0 && iSeqToShortenLinewise.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      iSeqToShortenLinewise.SetMax(iSeqToShortenLinewise.GetTotal());
      iSeqToShortenLinewise.SetCurrentPosition(1);
    }
    if( 0 != tempFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    tempFile.RemoveFields();
    SeqRemoveAll(iSeqToShortenLinewise);
    tempFile.AddField("LabwareID", file_labID, hslString, 255);
    tempFile.AddField("PositionID", file_PosID, hslString, 255);
    if( 0 == tempFile.Open(temporaryFile + " " + "Tabelle1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, temporaryFile, "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (tempFile.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == tempFile.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(iSeqToShortenLinewise, file_labID, file_PosID);
      }
    }
    if( 0 != tempFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    tempFile.RemoveFields();
    HSLMapReport::DeleteFile(temporaryFile);
    iSeqToShortenLinewise.SetCurrentPosition(1);
    oChannelPattern = Translate("");
    {
      for(loopCounter3 = 0; loopCounter3 < iNumOfSamples;)
      {
        loopCounter3 = loopCounter3 + 1;
        oChannelPattern = StrConcat2(oChannelPattern, Translate("1"));
      }
    }
    oChannelPattern = StrFillRight(oChannelPattern, Translate("0"), 8);
  }

  function MergeUpTo4Sequences( device & ML_STAR, sequence & InputSequence1, sequence & InputSequence2, sequence & InputSequence3, sequence & InputSequence4, sequence & OutputSequence, variable NumberOfSequencesToMerge, variable SortOutputSequence ) void {
    private variable loopCounter10;
    private variable loopCounter11;
    private variable sql_statement;
    private variable asp_angle;
    private variable CurrentPositionOfSeq;
    private variable currentPos;
    private variable asp_pos_id;
    private variable EndPositionOfSeq;
    private variable asp_labid;
    private variable loopRounds;
    private variable seq_sort_file;
    private variable asp_y_coord;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private file seq_sort;
    seq_sort_file = "C:\\temp\\seq_sort_file.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeError(-1523711744, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    CurrentPositionOfSeq = InputSequence1.GetCurrentPosition();
    EndPositionOfSeq = InputSequence1.GetCount();
    loopRounds = EndPositionOfSeq - CurrentPositionOfSeq;
    loopRounds = loopRounds + 1;
    currentPos = CurrentPositionOfSeq;
    {
      for(loopCounter10 = 0; loopCounter10 < loopRounds;)
      {
        loopCounter10 = loopCounter10 + 1;
        InputSequence1.SetCurrentPosition(currentPos);
        asp_labid = SeqGetLabwareId(InputSequence1);
        asp_pos_id = SeqGetPositionId(InputSequence1);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        currentPos = currentPos + 1;
      }
    }
    CurrentPositionOfSeq = InputSequence2.GetCurrentPosition();
    EndPositionOfSeq = InputSequence2.GetCount();
    loopRounds = EndPositionOfSeq - CurrentPositionOfSeq;
    loopRounds = loopRounds + 1;
    currentPos = CurrentPositionOfSeq;
    {
      for(loopCounter10 = 0; loopCounter10 < loopRounds;)
      {
        loopCounter10 = loopCounter10 + 1;
        InputSequence2.SetCurrentPosition(currentPos);
        asp_labid = SeqGetLabwareId(InputSequence2);
        asp_pos_id = SeqGetPositionId(InputSequence2);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        currentPos = currentPos + 1;
      }
    }
    if (NumberOfSequencesToMerge > 2)
    {
      CurrentPositionOfSeq = InputSequence3.GetCurrentPosition();
      EndPositionOfSeq = InputSequence3.GetCount();
      loopRounds = EndPositionOfSeq - CurrentPositionOfSeq;
      loopRounds = loopRounds + 1;
      currentPos = CurrentPositionOfSeq;
      {
        for(loopCounter10 = 0; loopCounter10 < loopRounds;)
        {
          loopCounter10 = loopCounter10 + 1;
          InputSequence3.SetCurrentPosition(currentPos);
          asp_labid = SeqGetLabwareId(InputSequence3);
          asp_pos_id = SeqGetPositionId(InputSequence3);
          DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
          if( 0 == seq_sort.WriteRecord() )
          {
                MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
          }
          currentPos = currentPos + 1;
        }
      }
    }
    if (NumberOfSequencesToMerge > 3)
    {
      CurrentPositionOfSeq = InputSequence4.GetCurrentPosition();
      EndPositionOfSeq = InputSequence4.GetCount();
      loopRounds = EndPositionOfSeq - CurrentPositionOfSeq;
      loopRounds = loopRounds + 1;
      currentPos = CurrentPositionOfSeq;
      {
        for(loopCounter10 = 0; loopCounter10 < loopRounds;)
        {
          loopCounter10 = loopCounter10 + 1;
          InputSequence4.SetCurrentPosition(currentPos);
          asp_labid = SeqGetLabwareId(InputSequence4);
          asp_pos_id = SeqGetPositionId(InputSequence4);
          DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
          if( 0 == seq_sort.WriteRecord() )
          {
                MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
          }
          currentPos = currentPos + 1;
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if (SortOutputSequence == 0)
    {
      seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
      seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
      seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
      seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
      seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
      seq_sort.AddField("asp_angle", asp_angle, hslFloat);
      if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
      }
    }
    else
    {
      sql_statement = "SELECT * FROM sheet1 ORDER BY asp_x_coord ASC, asp_y_coord DESC";
      sql_statement = "SELECT * FROM sheet1 ORDER BY asp_lab_id ASC, asp_x_coord ASC, asp_y_coord DESC";
      TrcTrace(Translate("sql_statement = "), sql_statement);
      seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
      seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
      seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
      seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
      seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
      seq_sort.AddField("asp_angle", asp_angle, hslFloat);
      if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
      {
            MECC::RaiseRuntimeError(-1523711744, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
      }
    }
    SeqRemoveAll(OutputSequence);
    {
      loopCounter11 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter11 = loopCounter11 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeError(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqAdd(OutputSequence, asp_labid, asp_pos_id);
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    OutputSequence.SetCurrentPosition(1);
    TrcTrace(Translate("End of merging sequences"), Translate(""));
    HSLMapReport::DeleteFile(seq_sort_file);
  }

  function GetTipTypeFromSequence( sequence & iTipSequence, variable & oTipType ) void {
    private variable LabwareID;
    private variable CharToRemove;
    private variable LabwareID_check;
    private variable LabwareID_check_UPCASE;
    private variable LabwareID_length;
    oTipType = 0;
    oTipType = 999999999;
    iTipSequence.SetCurrentPosition(1);
    LabwareID = SeqGetLabwareId(iTipSequence);
    LabwareID_length = StrGetLength(LabwareID);
    CharToRemove = LabwareID_length - 7;
    LabwareID_check = StrLeft(LabwareID, CharToRemove);
    LabwareID_check_UPCASE = StrMakeUpper(LabwareID_check);
    TrcTrace(Translate("---------------- LabwareID = "), LabwareID_check_UPCASE);
    if (LabwareID_check_UPCASE == "ST")
    {
      oTipType = 0;
    }
    if (LabwareID_check_UPCASE == "STF")
    {
      oTipType = 1;
    }
    if (LabwareID_check_UPCASE == "LT")
    {
      oTipType = 2;
    }
    if (LabwareID_check_UPCASE == "LTF")
    {
      oTipType = 1;
    }
    if (LabwareID_check_UPCASE == "HT")
    {
      oTipType = 4;
    }
    if (LabwareID_check_UPCASE == "HTF")
    {
      oTipType = 5;
    }
    if (LabwareID_check_UPCASE == "TIP_50UL")
    {
      oTipType = 22;
    }
    if (LabwareID_check_UPCASE == "TIP_50ULF")
    {
      oTipType = 23;
    }
  }

  function SortOneSequenceAndOneVolumeForChannels( sequence & sequence_for_sorting, variable & array_volume[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable deltaY;
    private variable lookup_return;
    private variable LoopsNum;
    private variable asp_angle;
    private variable sql_statement;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable volume;
    private variable loopCounter1;
    private variable array_size;
    private variable seq_sort_file;
    private variable Unique_x_coordinate;
    private variable loopCounter2;
    private variable asp_y_coord;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        volume=array_volume.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslFloat);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    array_volume.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslFloat);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesprocessed.AddAsLast(0);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = LOOKUP::Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    Unique_y_coordinate = asp_y_coord;
                    array_volume.AddAsLast(volume);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
  }

  function SortSequenceForChannels( sequence & sequence_for_sorting, device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable deltaY;
    private variable lookup_return;
    private variable LoopsNum;
    private variable sql_statement;
    private variable asp_angle;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable loopCounter1;
    private variable array_size;
    private variable loopCounter2;
    private variable Unique_x_coordinate;
    private variable seq_sort_file;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_y_coord;
    private variable loopCounter4;
    private variable asp_z_coord;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesprocessed.AddAsLast(0);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = LOOKUP::Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    Unique_y_coordinate = asp_y_coord;
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
  }

  function SortTwoSequencesAndOneVolumeForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable deltaY;
    private variable lookup_return;
    private variable LoopsNum;
    private variable disp_labid;
    private variable asp_angle;
    private variable sql_statement;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable volume;
    private variable disp_posid;
    private variable array_size;
    private variable loopCounter1;
    private variable Unique_x_coordinate;
    private variable loopCounter2;
    private variable seq_sort_file;
    private variable loopCounter3;
    private variable asp_y_coord;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesdestposid[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuespdestlabid[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        disp_labid = SeqGetLabwareId(secondary_seq);
        disp_posid = SeqGetPositionId(secondary_seq);
        volume=array_volume.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslFloat);
    seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    array_volume.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        arr_valuespdestlabid.SetSize(0);
        arr_valuesdestposid.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslFloat);
        seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
        seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesprocessed.AddAsLast(0);
            arr_valuespdestlabid.AddAsLast(disp_labid);
            arr_valuesdestposid.AddAsLast(disp_posid);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = LOOKUP::Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    disp_labid=arr_valuespdestlabid.GetAt(loopCounter4-1);
                    disp_posid=arr_valuesdestposid.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    SeqAdd(secondary_seq, disp_labid, disp_posid);
                    Unique_y_coordinate = asp_y_coord;
                    array_volume.AddAsLast(volume);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }

  function SortTwoSequencesAndTwoVolumesForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_volume2[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable deltaY;
    private variable lookup_return;
    private variable LoopsNum;
    private variable disp_labid;
    private variable volume2;
    private variable asp_angle;
    private variable sql_statement;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable disp_posid;
    private variable volume;
    private variable array_size;
    private variable loopCounter1;
    private variable seq_sort_file;
    private variable Unique_x_coordinate;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable asp_y_coord;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesdestposid[];
    private variable arr_valuesvol2[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuespdestlabid[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("volume2", volume2, hslFloat);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        disp_labid = SeqGetLabwareId(secondary_seq);
        disp_posid = SeqGetPositionId(secondary_seq);
        volume=array_volume.GetAt(loopCounter1-1);
        volume2=array_volume2.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("volume2", volume2, hslFloat);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslFloat);
    seq_sort2.AddField("volume2", volume2, hslFloat);
    seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    array_volume.SetSize(0);
    array_volume2.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesvol2.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        arr_valuespdestlabid.SetSize(0);
        arr_valuesdestposid.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslFloat);
        seq_sort2.AddField("volume2", volume2, hslFloat);
        seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
        seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesvol2.AddAsLast(volume2);
            arr_valuesprocessed.AddAsLast(0);
            arr_valuespdestlabid.AddAsLast(disp_labid);
            arr_valuesdestposid.AddAsLast(disp_posid);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = LOOKUP::Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    disp_labid=arr_valuespdestlabid.GetAt(loopCounter4-1);
                    disp_posid=arr_valuesdestposid.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    volume2=arr_valuesvol2.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    SeqAdd(secondary_seq, disp_labid, disp_posid);
                    Unique_y_coordinate = asp_y_coord;
                    array_volume.AddAsLast(volume);
                    array_volume2.AddAsLast(volume2);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }
} // library namespace
