#pragma once
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "CellCultureAutomation\\ExecutingLayer\\STARController\\TransportControllerDefinitions.hsl"
#include "CellCultureAutomation\\Common\\Enums.hsl"
#include "HSLUtilLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace SLOW_ISWAP_SPEED {
  function FirmwareCommandSet_iSWAPRotationReset( device & ML_STAR ) void ;
  function FirmwareCommandSet_iSWAPRotationSlower( device & ML_STAR, variable i_enmPlateType ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function FirmwareCommandSet_iSWAPRotationSlower( device & ML_STAR, variable i_enmPlateType ) void {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function FirmwareCommandSet_iSWAPRotationReset( device & ML_STAR ) void {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }
} // library namespace
