#pragma once
#include "HSLStrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace VANTAGELIGHTS {
  function LightMode( device & ML_STAR, variable i_intLightState ) void ;
  function LightOnGreen( device & ML_STAR, variable i_int_Intensity ) void ;
  function LightsOff( device & ML_STAR ) void ;
  function LightsOn( device & ML_STAR, variable i_int_Intensity ) void ;
  function LightsOnBlue( device & ML_STAR, variable i_int_Intensity ) void ;
  function LightsOnCustom( device & ML_STAR, variable i_int_PercentWhite, variable i_int_PercentRed, variable i_int_PercentGreen, variable i_int_PercentBlue ) void ;
  function LightsOnRed( device & ML_STAR, variable i_int_Intensity ) void ;
  function LightsOnWhite( device & ML_STAR, variable i_int_Intensity ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function LightsOff( device & ML_STAR ) void {
    private variable l_strFirmwareCommand;
    private variable i_int_Intensity;
    Trace("Lights off");
    l_strFirmwareCommand = StrConcat2(Translate("C0AMLIli0"), Translate(""));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function LightsOn( device & ML_STAR, variable i_int_Intensity ) void {
    private variable l_strFirmwareCommand;
    private variable cmd;
    Trace("Lights on");
    l_strFirmwareCommand = StrConcat2(Translate("C0AMLIli1os"), i_int_Intensity);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function LightsOnBlue( device & ML_STAR, variable i_int_Intensity ) void {
    private variable uv;
    private variable white;
    private variable cmd;
    private variable blue;
    private variable red;
    private variable green;
    cmd = Translate("C0AMLIli1ol");
    white = 0;
    red = 0;
    green = 0;
    blue = i_int_Intensity;
    uv = 0;
    cmd = StrConcat12(cmd, Translate(" "), white, Translate(" "), red, Translate(" "), green, Translate(" "), blue, Translate(" "), uv, Translate(""));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function LightOnGreen( device & ML_STAR, variable i_int_Intensity ) void {
    private variable uv;
    private variable white;
    private variable cmd;
    private variable red;
    private variable blue;
    private variable green;
    cmd = Translate("C0AMLIli1ol");
    white = 0;
    red = 0;
    green = i_int_Intensity;
    blue = 0;
    uv = 0;
    cmd = StrConcat12(cmd, Translate(" "), white, Translate(" "), red, Translate(" "), green, Translate(" "), blue, Translate(" "), uv, Translate(""));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function LightsOnWhite( device & ML_STAR, variable i_int_Intensity ) void {
    private variable uv;
    private variable white;
    private variable cmd;
    private variable red;
    private variable blue;
    private variable green;
    cmd = Translate("C0AMLIli1ol");
    white = i_int_Intensity;
    red = 0;
    green = 0;
    blue = 0;
    uv = 0;
    cmd = StrConcat12(cmd, Translate(" "), white, Translate(" "), red, Translate(" "), green, Translate(" "), blue, Translate(" "), uv, Translate(""));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function LightsOnRed( device & ML_STAR, variable i_int_Intensity ) void {
    private variable uv;
    private variable white;
    private variable cmd;
    private variable red;
    private variable blue;
    private variable green;
    cmd = Translate("C0AMLIli1ol");
    white = 0;
    red = i_int_Intensity;
    green = 0;
    blue = 0;
    uv = 0;
    cmd = StrConcat12(cmd, Translate(" "), white, Translate(" "), red, Translate(" "), green, Translate(" "), blue, Translate(" "), uv, Translate(""));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function LightsOnCustom( device & ML_STAR, variable i_int_PercentWhite, variable i_int_PercentRed, variable i_int_PercentGreen, variable i_int_PercentBlue ) void {
    private variable uv;
    private variable white;
    private variable cmd;
    private variable red;
    private variable blue;
    private variable green;
    cmd = Translate("C0AMLIli1ol");
    white = i_int_PercentWhite;
    red = i_int_PercentRed;
    green = i_int_PercentGreen;
    blue = i_int_PercentBlue;
    uv = 0;
    cmd = StrConcat12(cmd, Translate(" "), white, Translate(" "), red, Translate(" "), green, Translate(" "), blue, Translate(" "), uv, Translate(""));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function LightMode( device & ML_STAR, variable i_intLightState ) void {
    private variable uv;
    private variable white;
    private variable cmd;
    private variable blue;
    private variable red;
    private variable i_int_Intensity;
    private variable green;
    cmd = Translate("C0AMLIli");
    cmd = StrConcat12(cmd, i_intLightState, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }
} // library namespace
