#pragma once
#include "HSLFilLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLMappingReport.hsl"
#include "HSLSeqLib.hsl"
#include "VirtualLabware\\VirtualLabware.hsl"
#include "HSLMthLib.hsl"
#include "HSL_SeqDailyTools.hs_"
#include "HSLML_STARLib.hsl"
#include "HSLChannelPattern.hsl"
#include "HSLVectorDbTracking.hsl"
#include "Visual_NTR_library\\HSL_GetNumOfDefPosInRack.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace VISUAL_NTR_LIBRARY_FOR_HAM_GB_NTR_LIBRARIES {
  private function A_DefineCustomizedTipManagement_db_path( variable & db_fullPath ) void ;
  private function CalculateAbsoluteSeqPosition( variable currentStack, variable currentLayer, variable tipPosInRack, variable sortByTier, variable NumberOfStacks, variable NumberOfLayers, variable tipsPerRack, variable & calculatedSeqPos, variable indivColumnSelection ) void ;
  private function CalculateCurrentStackAndTipsLeftinLayer( sequence iNTRTipSeq, variable total_stacks, variable NumOfLayersPerStack, variable num_of_tips_per_rack, variable indivColumnSelection, variable sortByTier, variable & currentStack, variable & currentLayer, variable & tips_remaining_in_currentRack, variable & tips_remaining_in_currentLayer, variable & selectedCel ) void ;
  function Channels_TipCounter_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable iNTRTipCounterName, variable iEditBoxTitleString, variable iSortByTier ) void ;
  function Channels_TipCounter_Write( device & ML_STAR, sequence & iNTRTipSequence, variable iNTRTipCounterName, sequence iNTRFrameWasteSequence, sequence & ioCOREGrippersSequence, variable iNTRRackDisposalChoice, variable iFinalRackInTier_TipDisposal, sequence & ioSeq_FinalTipInTierDestination, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection, variable iEditBoxTitleString ) void ;
  private function CheckEmptyRacksBeforeTipPickUp( variable iNTRTipCounterName, sequence & iNTRTipSequence, sequence iNTRFrameWasteSequence, sequence ioCOREGrippersSequence, variable iTransportChoice, variable iChannelsForTransport, device & ML_STAR, variable iFinalRackInTier_TipDisposal, sequence & ioSeq_FinalTipInTierDestination, variable pipetting_tool, variable iNTRRackDisposalChoice, variable iMessage ) void ;
  private function DiscardTipsWithChannels( sequence & iNTRTipSequence, variable remainingTipsInRack, device & ML_STAR, variable numOfChannelsInstalled, variable currentNTRSeqPosition, sequence & ioSeq_FinalTipInTierDestination ) void ;
  function MPH_TipCounter_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable iNTRTipCounterName, variable iEditBoxTitleString, variable iSingleColumnPickup ) void ;
  function MPH_TipCounter_Write( device & ML_STAR, sequence & iNTRTipSequence, variable iNTRTipCounterName, sequence iNTRFrameWasteSequence, sequence & ioCOREGrippersSequence, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection, variable iEditBoxTitleString, variable iNTRRackDisposalChoice ) void ;
  function NTR_Seq_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable sortByTier, variable iSingleColumnPickup, variable pipetting_tool, variable iNTRTipCounterName, variable iEditBoxTitleString ) void ;
  function NTR_Tip_Counter_Read( sequence & ioNTRTipSequence, variable iNTRTipCounterName ) variable ;
  private function NTR_to_waste_core_VENUS( device & ML_STAR, sequence & RackSequenceToThrowInWaste, sequence RackPositionOnWasteBlock, sequence & CORE_GripperSequence, variable CORE_Tool_Already_Present, variable Eject_CORE_Tool_After_Step, variable ParkISwapOnRight, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection ) void ;
  private function Read_RackTossStoredPosition( variable & position, variable iNTRTipCounter ) void ;
  private function Read_Vars_for_NTRSeq( variable iNTRTipCounter, variable & num_of_stacks, variable & tips_per_rack, variable & num_of_tiers, variable & firstPosUsedInTier, variable & sortByTier, variable & indivColumnSelection ) void ;
  function Reset_TipCounter( variable iTipCounterName ) void ;
  function Show_NTR_Editor( sequence & seq, variable iNTRTipCounter, variable iMessage ) variable ;
  private function StorePosition( variable position, variable iNTRTipCounter ) void ;
  private function StoreRackTossPosition( variable position, variable iNTRTipCounter ) void ;
  private function StrTokenize( variable strIn, variable strDelimiter, variable & arrTokens[], variable bAttendEmptyTokens ) void ;
  function Tip_Counter_Write_Internal( sequence & ioTipSequence, variable iTipCounterName ) variable ;
  private function _Analyze_Seq_to_build_NTR_GUI( sequence & iPlateStack_seq, device & ML_STAR, variable iSeqSortChoice, variable indivColumnsEditing, variable pipetting_tool, variable iNTRTipCounter ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    HSL_SEQDAILYTOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    HSL_SEQDAILYTOOLS::_ExitLibrary();
  }

  function Channels_TipCounter_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable iNTRTipCounterName, variable iEditBoxTitleString, variable iSortByTier ) void {
    NTR_Seq_Edit(ML_STAR, ioNTRTipSequence, iSortByTier, 1, Translate("chn"), iNTRTipCounterName, iEditBoxTitleString);
  }

  function NTR_Tip_Counter_Read( sequence & ioNTRTipSequence, variable iNTRTipCounterName ) variable {
    private variable myTipCounter;
    private variable readSuccess;
    private variable currentPosition;
    private variable sqlCommand;
    private variable endPosition;
    private file TIP_COUNT_READ;
    private file TIP_COUNT_ADD;
    private variable db_fullPath;
    A_DefineCustomizedTipManagement_db_path(db_fullPath);
    sqlCommand = StrConcat4(Translate("SELECT * FROM [TipCounters] WHERE [TipCounter] = '"), iNTRTipCounterName, Translate("'"), Translate(""));
    readSuccess = 0;
    {
      while (readSuccess == 0)
      {
        onerror goto errLabel_1 ;
        err.Clear();
        TIP_COUNT_READ.AddField("TipCounter", myTipCounter, hslString, 255);
        TIP_COUNT_READ.AddField("CurrentPosition", currentPosition, hslInteger);
        TIP_COUNT_READ.AddField("EndPosition", endPosition, hslInteger);
        if( 0 == TIP_COUNT_READ.Open(db_fullPath + " " + "TipCounters", hslAppend, sqlCommand) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
        }
        if( 0 == TIP_COUNT_READ.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        return (currentPosition);
        if( 0 != TIP_COUNT_READ.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TIP_COUNT_READ.RemoveFields();
        readSuccess = 1;
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          if( 0 != TIP_COUNT_READ.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          TIP_COUNT_READ.RemoveFields();
          currentPosition = ioNTRTipSequence.GetCurrentPosition();
          endPosition = ioNTRTipSequence.GetCount();
          TIP_COUNT_ADD.AddField("TipCounter", iNTRTipCounterName, hslString, 255);
          TIP_COUNT_ADD.AddField("CurrentPosition", currentPosition, hslInteger);
          TIP_COUNT_ADD.AddField("EndPosition", endPosition, hslInteger);
          if( 0 == TIP_COUNT_ADD.Open(db_fullPath + " " + "TipCounters", hslAppend) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
          }
          if( 0 == TIP_COUNT_ADD.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != TIP_COUNT_ADD.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          TIP_COUNT_ADD.RemoveFields();
          return (currentPosition);
        }   /* end if from skip handler if no error */
      }
    }
  }

  function Channels_TipCounter_Write( device & ML_STAR, sequence & iNTRTipSequence, variable iNTRTipCounterName, sequence iNTRFrameWasteSequence, sequence & ioCOREGrippersSequence, variable iNTRRackDisposalChoice, variable iFinalRackInTier_TipDisposal, sequence & ioSeq_FinalTipInTierDestination, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection, variable iEditBoxTitleString ) void {
    CheckEmptyRacksBeforeTipPickUp(iNTRTipCounterName, iNTRTipSequence, iNTRFrameWasteSequence, ioCOREGrippersSequence, iTransportChoice, iChannelsForTransport, ML_STAR, iFinalRackInTier_TipDisposal, ioSeq_FinalTipInTierDestination, Translate("chn"), iNTRRackDisposalChoice, iEditBoxTitleString);
  }

  private function NTR_to_waste_core_VENUS( device & ML_STAR, sequence & RackSequenceToThrowInWaste, sequence RackPositionOnWasteBlock, sequence & CORE_GripperSequence, variable CORE_Tool_Already_Present, variable Eject_CORE_Tool_After_Step, variable ParkISwapOnRight, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection ) void {
    private variable RackLabwareID;
    private variable ntrANGLE;
    private variable iswapPresent;
    private variable Delta_X;
    private variable WasteLabwareID;
    private variable ntrX;
    private variable ntrY;
    private variable Delta_X_back;
    private variable ntrZ;
    private variable COREGripHeight;
    private variable COREGripOpening;
    private variable CurrFileNameOfLabware;
    private variable COREGripWidth;
    private variable currentlabwareIDForTranslation;
    private variable iSWAPGripHeight;
    private variable iSWAPGripOpening;
    private variable iSWAPGripWidth;
    private variable currentlabwareIDForTranslation_left18;
    private variable CoreGripXPos;
    private variable CoreGripAngle;
    private variable CoreGripZPos;
    private variable CoreGripYPos;
    private variable PositionToMoveArm;
    private variable RackWasteLabwareIDForiSWAPMove;
    private variable PositionForFinalArmMove;
    private variable strWasteSeqName;
    private variable STAR_type;
    private variable a_coord;
    private variable y_coord;
    private variable x_coord;
    private variable z_coord;
    private variable tmp_x;
    private variable tmp_y;
    private variable tmp_z;
    private sequence tmpSeq;
    if(0){
      RackWasteLabwareIDForiSWAPMove = SeqGetLabwareId(RackPositionOnWasteBlock);
      DevGetLabwarePosition(ML_STAR, RackWasteLabwareIDForiSWAPMove, CoreGripXPos, CoreGripYPos, CoreGripZPos, CoreGripAngle);
      PositionToMoveArm = CoreGripXPos - 300;
      PositionToMoveArm = PositionToMoveArm * 10;
      PositionForFinalArmMove = MthFloor(PositionToMoveArm);
    }
    currentlabwareIDForTranslation = SeqGetLabwareId(RackSequenceToThrowInWaste);
    currentlabwareIDForTranslation_left18 = StrLeft(currentlabwareIDForTranslation, 18);
    CurrFileNameOfLabware = VIRTUALLABWARE::GetFileNameOfLabware(ML_STAR, currentlabwareIDForTranslation);
    strWasteSeqName = SeqGetName(RackPositionOnWasteBlock);
    strWasteSeqName = StrMakeUpper(strWasteSeqName);
    if (strWasteSeqName == "DEFAULT")
    {
      SeqRemoveAll(RackPositionOnWasteBlock);
      SeqAdd(RackPositionOnWasteBlock, currentlabwareIDForTranslation, Translate("1"));
      SeqCopySequence(tmpSeq, RackPositionOnWasteBlock);
      SeqRemoveAll(RackPositionOnWasteBlock);
      tmpSeq.SetCurrentPosition(1);
      DevGetLabwarePositionEx(ML_STAR, currentlabwareIDForTranslation, Translate("1"), x_coord, y_coord, z_coord, a_coord);
      STAR_type = HSLML_STAR::GetInstrumentType_GlobalDevice(ML_STAR);
      if (STAR_type == 0)
      {
        tmp_x = 1290;
      }
      else
      {
        tmp_x = 750;
      }
      tmp_x = tmp_x - x_coord;
      tmp_y = 350 - y_coord;
      tmp_z = 225 - z_coord;
      VIRTUALLABWARE::MoveCloneSeq(ML_STAR, tmpSeq, RackPositionOnWasteBlock, tmp_x, tmp_y, tmp_z);
    }
    if (iTransportChoice == 0)
    {
      if (currentlabwareIDForTranslation_left18 == "TIP384_384TIPS_NTR")
      {
        Delta_X = -32;
        COREGripHeight = 21;
        COREGripWidth = 79;
        COREGripOpening = 86;
      }
      else
      {
        if (currentlabwareIDForTranslation_left18 == "TIP384_96TIPS_NTR_")
        {
          Delta_X = -32;
          COREGripHeight = 21;
          COREGripWidth = 79;
          COREGripOpening = 86;
        }
        else
        {
          Delta_X = -20;
          COREGripHeight = 21;
          COREGripWidth = 76;
          COREGripOpening = 81;
        }
      }
      Delta_X_back = Delta_X * -1;
      CORE_GripperSequence.SetCurrentPosition(1);
      WasteLabwareID = SeqGetLabwareId(RackPositionOnWasteBlock);
      DevGetLabwarePosition(ML_STAR, WasteLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
      if(0){
        TrcTrace8(Translate(" NTRToWaste: Position of Waste: WasteRackLabwareID = "), WasteLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
      }
      RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
      DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
      if(0){
        TrcTrace8(Translate(" NTRToWaste: Position of Labware BEFORE shifting: RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
      }
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackSequenceToThrowInWaste, Delta_X, 0, 0);
      RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
      DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
      if(0){
        TrcTrace8(Translate(" NTRToWaste: Position of Labware AFTER shifting: RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
      }
    }
    else
    {
      if (currentlabwareIDForTranslation_left18 == "TIP384_384TIPS_NTR")
      {
        iSWAPGripHeight = 22;
        iSWAPGripWidth = 77;
        iSWAPGripOpening = 90;
      }
      else
      {
        if (currentlabwareIDForTranslation_left18 == "TIP384_96TIPS_NTR_")
        {
          iSWAPGripHeight = 22;
          iSWAPGripWidth = 77;
          iSWAPGripOpening = 90;
        }
        else
        {
          iSWAPGripHeight = 25;
          iSWAPGripWidth = 77;
          iSWAPGripOpening = 90;
        }
      }
    }
    onerror goto errLabel_2 ;
    err.Clear();
    if (iTransportChoice == 0)
    {
      if (ntrY > 433.8)
      {
        iswapPresent = DevGetCfgValueWithKey(ML_STAR, 36);
        if (iswapPresent != 0)
        {
          ML_STAR.FirmwareCommand("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");
          ML_STAR.FirmwareCommand("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");
          ML_STAR.MoveToPosition("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");
          ML_STAR.FirmwareCommand("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");
          ML_STAR.FirmwareCommand("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");
        }
      }
      if (Eject_CORE_Tool_After_Step == 1)
      {
        ML_STAR.ZSwapGetPlate("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");
        ML_STAR.ZSwapPlacePlate("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");
        if(0){
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
      }
      else
      {
        ML_STAR.ZSwapGetPlate("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");
        ML_STAR.ZSwapPlacePlate("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");
        if(0){
          {
            	ML_STAR.EasyCOREGripTransport("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");
          }
        }
      }
      if (ntrY > 433.8)
      {
        if (iswapPresent != 0)
        {
          if (ParkISwapOnRight == 1)
          {
            ML_STAR.FirmwareCommand("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");
            ML_STAR.FirmwareCommand("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");
          }
        }
      }
    }
    else
    {
      if (iSWAPGripDirection == 0)
      {
        if (Eject_CORE_Tool_After_Step == 0)
        {
          ML_STAR.GetPlate("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");
          ML_STAR.PutPlate("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");
          if(0){
            {
              	ML_STAR.EasyiSWAPTransport("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");
            }
          }
        }
        else
        {
          ML_STAR.GetPlate("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");
          ML_STAR.PutPlate("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");
          ML_STAR.ParkISwap("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");
          if(0){
            {
              	ML_STAR.EasyiSWAPTransport("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");
            }
          }
        }
      }
      else
      {
        if (Eject_CORE_Tool_After_Step == 0)
        {
          ML_STAR.GetPlate("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");
          ML_STAR.PutPlate("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");
          if(0){
            {
              	ML_STAR.EasyiSWAPTransport("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");
            }
          }
        }
        else
        {
          ML_STAR.GetPlate("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");
          ML_STAR.PutPlate("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");
          ML_STAR.ParkISwap("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");
          if(0){
            {
              	ML_STAR.EasyiSWAPTransport("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");
            }
          }
        }
      }
    }
    if (iTransportChoice == 0)
    {
      RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
      DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
      VIRTUALLABWARE::MoveSeq(ML_STAR, RackSequenceToThrowInWaste, Delta_X_back, 0, 0);
      RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
      DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
      if(0){
        TrcTrace8(Translate(" NTRToWaste: Position of Labware AFTER SHIFTING BACK: RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
      }
    }
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      if (iTransportChoice == 0)
      {
        VIRTUALLABWARE::MoveSeq(ML_STAR, RackSequenceToThrowInWaste, Delta_X_back, 0, 0);
        RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
        DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
        if(0){
          TrcTrace8(Translate(" NTRToWaste: Position of Labware AFTER SHIFTING BACK FROM ERROR HANDLER: RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
          SeqIncrement(RackSequenceToThrowInWaste, 1);
        }
      }
    }   /* end if from skip handler if no error */
  }

  function Tip_Counter_Write_Internal( sequence & ioTipSequence, variable iTipCounterName ) variable {
    private variable currentPosition;
    private variable sqlCommand;
    private variable endPosition;
    private file TIP_COUNT_UPDATE;
    private variable db_fullPath;
    currentPosition = ioTipSequence.GetCurrentPosition();
    TrcTrace(Translate("Tip Counter Write Internal, currentPosition = "), currentPosition);
    if (currentPosition == 0)
    {
      currentPosition = 1;
      ioTipSequence.SetCurrentPosition(currentPosition);
    }
    endPosition = ioTipSequence.GetCount();
    sqlCommand = StrConcat8(Translate("UPDATE [TipCounters] SET [CurrentPosition] = "), currentPosition, Translate(" WHERE [TipCounter] = '"), iTipCounterName, Translate("'"), Translate(""), Translate(""), Translate(""));
    A_DefineCustomizedTipManagement_db_path(db_fullPath);
    TIP_COUNT_UPDATE.AddField("TipCounter", iTipCounterName, hslString, 255);
    TIP_COUNT_UPDATE.AddField("CurrentPosition", currentPosition, hslInteger);
    if( 0 == TIP_COUNT_UPDATE.Open(db_fullPath + " " + "TipCounters", hslAppend, sqlCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
    }
    if( 0 != TIP_COUNT_UPDATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TIP_COUNT_UPDATE.RemoveFields();
    sqlCommand = StrConcat8(Translate("UPDATE [TipCounters] SET [EndPosition] = "), endPosition, Translate(" WHERE [TipCounter] = '"), iTipCounterName, Translate("'"), Translate(""), Translate(""), Translate(""));
    TIP_COUNT_UPDATE.AddField("TipCounter", iTipCounterName, hslString, 255);
    TIP_COUNT_UPDATE.AddField("EndPosition", endPosition, hslInteger);
    if( 0 == TIP_COUNT_UPDATE.Open(db_fullPath + " " + "TipCounters", hslAppend, sqlCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
    }
    if( 0 != TIP_COUNT_UPDATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TIP_COUNT_UPDATE.RemoveFields();
    return (currentPosition);
  }

  function MPH_TipCounter_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable iNTRTipCounterName, variable iEditBoxTitleString, variable iSingleColumnPickup ) void {
    NTR_Seq_Edit(ML_STAR, ioNTRTipSequence, 0, iSingleColumnPickup, Translate("mph"), iNTRTipCounterName, iEditBoxTitleString);
  }

  function MPH_TipCounter_Write( device & ML_STAR, sequence & iNTRTipSequence, variable iNTRTipCounterName, sequence iNTRFrameWasteSequence, sequence & ioCOREGrippersSequence, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection, variable iEditBoxTitleString, variable iNTRRackDisposalChoice ) void {
    private sequence dummySeq;
    CheckEmptyRacksBeforeTipPickUp(iNTRTipCounterName, iNTRTipSequence, iNTRFrameWasteSequence, ioCOREGrippersSequence, iTransportChoice, iChannelsForTransport, ML_STAR, 0, dummySeq, Translate("mph"), iNTRRackDisposalChoice, iEditBoxTitleString);
  }

  private function A_DefineCustomizedTipManagement_db_path( variable & db_fullPath ) void {
    private variable path_system;
    db_fullPath = 0;
    path_system = FilGetSystemPath();
    db_fullPath = StrConcat2(path_system, Translate("\\CustomizedTipManagement.mdb"));
  }

  function Show_NTR_Editor( sequence & seq, variable iNTRTipCounter, variable iMessage ) variable {
    private variable lib_path;
    private variable Visual_NTR_library_path;
    private variable str_cmd;
    private variable VisualNTR_exe_path;
    private variable currentPosition;
    private variable str;
    private variable Visual_NTR_currentPosFile;
    private file pos_file;
    private variable LogfilePath;
    LogfilePath = FilGetLogFilesPath();
    lib_path = FilGetLibraryPath();
    Visual_NTR_library_path = StrConcat2(lib_path, Translate("\\Visual_NTR_library\\"));
    VisualNTR_exe_path = StrConcat4(Translate(""), Visual_NTR_library_path, Translate("Visual_NTR_Editor.exe"), Translate(""));
    Visual_NTR_currentPosFile = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate("_firstPosUsedInTier.txt"));
    currentPosition = seq.GetCurrentPosition();
    if (currentPosition == 0)
    {
      currentPosition = 1;
    }
    str_cmd = StrConcat4(VisualNTR_exe_path, Translate(" \""), LogfilePath, Translate("\""));
    str_cmd = StrConcat4(str_cmd, Translate(" \"VisualNTR_"), iNTRTipCounter, Translate("\""));
    str_cmd = StrConcat4(str_cmd, Translate(" \""), currentPosition, Translate("\""));
    str_cmd = StrConcat4(str_cmd, Translate(" \""), iMessage, Translate("\""));
    TrcTrace(Translate("--- Launching GUI with current Position="), currentPosition);
    {
      if( 0 == Shell(str_cmd, hslShow, hslSynchronous) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    TrcTrace(Translate("--- GUI closed"), Translate(""));
    pos_file.AddField(1, str, hslString);
    pos_file.SetDelimiter(hslAsciiText);
    if( 0 == pos_file.Open(Visual_NTR_currentPosFile, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_currentPosFile, "HxMetEdCompCmd");
    }
    if( 0 == pos_file.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != pos_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    pos_file.RemoveFields();
    currentPosition = StrIVal(str);
    seq.SetCurrentPosition(currentPosition);
    Tip_Counter_Write_Internal(seq, iNTRTipCounter);
    currentPosition = seq.GetCurrentPosition();
    return (currentPosition);
  }

  private function Read_Vars_for_NTRSeq( variable iNTRTipCounter, variable & num_of_stacks, variable & tips_per_rack, variable & num_of_tiers, variable & firstPosUsedInTier, variable & sortByTier, variable & indivColumnSelection ) void {
    private variable lib_path;
    private variable Visual_NTR_varstxt_path;
    private variable str;
    private file vars_file;
    private variable array_of_vars[];
    private variable LogfilePath;
    private variable Visual_NTR_currentPosFile;
    private file pos_file;
    num_of_stacks = 0;
    tips_per_rack = 0;
    num_of_tiers = 0;
    firstPosUsedInTier = 0;
    sortByTier = 0;
    indivColumnSelection = 0;
    LogfilePath = FilGetLogFilesPath();
    lib_path = FilGetLibraryPath();
    Visual_NTR_varstxt_path = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate(".txt"));
    Visual_NTR_currentPosFile = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate("_firstPosUsedInTier.txt"));
    vars_file.AddField(1, str, hslString);
    vars_file.SetDelimiter(hslAsciiText);
    if( 0 == vars_file.Open(Visual_NTR_varstxt_path, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_varstxt_path, "HxMetEdCompCmd");
    }
    if( 0 == vars_file.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == vars_file.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != vars_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    vars_file.RemoveFields();
    StrTokenize(str, Translate(","), array_of_vars, 0);
    num_of_stacks=array_of_vars.GetAt(3-1);
    num_of_tiers=array_of_vars.GetAt(2-1);
    tips_per_rack=array_of_vars.GetAt(1-1);
    sortByTier=array_of_vars.GetAt(6-1);
    indivColumnSelection=array_of_vars.GetAt(7-1);
    num_of_stacks = StrIVal(num_of_stacks);
    tips_per_rack = StrIVal(tips_per_rack);
    num_of_tiers = StrIVal(num_of_tiers);
    indivColumnSelection = StrIVal(indivColumnSelection);
    sortByTier = StrIVal(sortByTier);
    pos_file.AddField(1, str, hslString);
    pos_file.SetDelimiter(hslAsciiText);
    if( 0 == pos_file.Open(Visual_NTR_currentPosFile, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_currentPosFile, "HxMetEdCompCmd");
    }
    if( 0 == pos_file.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != pos_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    pos_file.RemoveFields();
    firstPosUsedInTier = StrIVal(str);
  }

  private function StrTokenize( variable strIn, variable strDelimiter, variable & arrTokens[], variable bAttendEmptyTokens ) void {
    private variable strEdit;
    private variable posLast;
    private variable strToAdd;
    private variable posCurrent;
    posCurrent = -1;
    posLast = -1;
    strToAdd = "";
    strEdit = strIn;
    if( StrGetLength(strEdit) == 0 || StrGetLength(strDelimiter) == 0 )
       return;
    posLast = StrGetLength(strEdit);
    posCurrent = StrFind(strEdit, strDelimiter);
    while (-1 != posCurrent && posLast > 0)
    {
         //get tokens before next delimiter char
         strToAdd = StrLeft(strEdit, posCurrent);
         StrTrimRight(strToAdd, "");
         StrTrimLeft (strToAdd, "");
         //add token to our output list
         if( StrGetLength(strToAdd) > 0 )
         {
              arrTokens.AddAsLast(strToAdd);
             // Trace(GetFunctionName(), " adding string to output list: $", strToAdd, "$", "" );
         }
         else
         {
              if( bAttendEmptyTokens )// empty string should also be added
              {
                   arrTokens.AddAsLast(strToAdd);
                   //Trace(GetFunctionName(), " adding string to output list: $", strToAdd, "$", "" );
              }
         }
         //prepare next loop by removing obsolete characters
         strEdit = StrRight(strEdit, posLast - posCurrent - StrGetLength(strDelimiter) );
         //Trace(GetFunctionName(), " next string = ", strEdit );
         //find next "non-delimiter"
         posCurrent = StrFind(strEdit, strDelimiter);
         posLast = StrGetLength(strEdit);
         //Trace(GetFunctionName(), " next pos = ", posCurrent );
    }//end while
    //no delimiter left
    //add the last part of the string to our output list
    if (-1 == posCurrent)// && posLast > 0
    {
         if( posLast == 0 && !bAttendEmptyTokens )
            return;
         StrTrimRight(strEdit, "");
         StrTrimLeft (strEdit, "");
         //Trace(GetFunctionName(), " no delimiter left - adding string to output list: $", strEdit, "$", "" );
         arrTokens.AddAsLast(strEdit);
    }
  }

  private function CalculateCurrentStackAndTipsLeftinLayer( sequence iNTRTipSeq, variable total_stacks, variable NumOfLayersPerStack, variable num_of_tips_per_rack, variable indivColumnSelection, variable sortByTier, variable & currentStack, variable & currentLayer, variable & tips_remaining_in_currentRack, variable & tips_remaining_in_currentLayer, variable & selectedCel ) void {
    private variable currentPosition;
    private variable tmp_pos;
    private variable cells_per_layer;
    private variable selectedColumn;
    private variable tmpVal;
    private variable tipsPerColumn;
    private variable tipsPerRow;
    currentStack = 0;
    currentLayer = 0;
    tips_remaining_in_currentRack = 0;
    tips_remaining_in_currentLayer = 0;
    selectedCel = 0;
    currentPosition = iNTRTipSeq.GetCurrentPosition();
    cells_per_layer = 0;
    tmp_pos = 0;
    tmpVal = 0;
    selectedCel = 0;
    selectedColumn = 0;
    if (num_of_tips_per_rack == 96)
    {
      tipsPerColumn = 8;
      tipsPerRow = 12;
    }
    if (num_of_tips_per_rack == 384)
    {
      tipsPerColumn = 16;
      tipsPerRow = 24;
    }
         cells_per_layer = num_of_tips_per_rack*total_stacks;
         tmpVal = (currentPosition + cells_per_layer) % cells_per_layer;
         currentLayer = currentPosition/cells_per_layer;
         if(tmpVal>0){currentLayer++;}
         if(currentLayer>NumOfLayersPerStack) {
               //the are no more tips in the tip sequence.
               currentLayer=0;
         }else{
              if(sortByTier==0){ //Sort by individual rack column
                    //Calculate current stack
                    tmp_pos= currentPosition -((currentLayer-1)*cells_per_layer);
                    tmpVal = tmp_pos % num_of_tips_per_rack;
                    currentStack = tmp_pos/num_of_tips_per_rack;
                    if (tmpVal>0) {currentStack++;}
                    if(indivColumnSelection ==2){
                          // Calculate current cel in rack for row sorting
                         tmp_pos = tmp_pos - (num_of_tips_per_rack*(currentStack-1));
                         tmpVal = tmp_pos % tipsPerRow;
                         tmp_pos = tmp_pos / tipsPerRow;
                         if(tmpVal>0){tmp_pos++;}
                         selectedCel = tmp_pos;
                     } else{
                            // Calculate current cel in rack
                             selectedCel = tmp_pos - (num_of_tips_per_rack*(currentStack-1));
                     }
               } else{
                         //Calculate current stack
                        tmpVal = currentPosition % tipsPerColumn;
                        currentStack = currentPosition / tipsPerColumn;
                        if(tmpVal>0) { currentStack ++;}
                        tmpVal=currentStack%total_stacks;
                        if(tmpVal==0){currentStack = total_stacks;} else {currentStack = tmpVal;}
                        // Calculate current tip position inside current rack
                     if(indivColumnSelection ==1){
                         tmp_pos= currentPosition-((currentLayer-1)*cells_per_layer);
                         tmpVal = tmp_pos % (tipsPerColumn*(total_stacks));
                         selectedColumn = tmp_pos / (tipsPerColumn*(total_stacks));
                          if(tmpVal>0) {selectedColumn++;}
                          tmpVal = currentPosition % tipsPerColumn;
                          if (tmpVal ==0) {tmpVal=tipsPerColumn;}
                          selectedCel = ((selectedColumn -1)*tipsPerColumn) + tmpVal;
                      }else{
                            //select first cel of the current rack
                            selectedCel = 1;
                          }
               }
            //Remaining tips in the current rack and tier
               if(indivColumnSelection !=2){
                    tips_remaining_in_currentRack = num_of_tips_per_rack - selectedCel +1;
               }
               if(indivColumnSelection ==2){
                    tips_remaining_in_currentRack = num_of_tips_per_rack - ((selectedCel-1)*tipsPerRow);
               }
               tips_remaining_in_currentLayer = tips_remaining_in_currentRack + (total_stacks-currentStack)*num_of_tips_per_rack;
          }
  }

  private function StorePosition( variable position, variable iNTRTipCounter ) void {
    private variable Visual_NTR_currentPosFile;
    private variable LogfilePath;
    private variable str;
    private file pos_file;
    LogfilePath = FilGetLogFilesPath();
    Visual_NTR_currentPosFile = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate("_firstPosUsedInTier.txt"));
    pos_file.AddField(1, str, hslString);
    pos_file.SetDelimiter(hslAsciiText);
    if( 0 == pos_file.Open(Visual_NTR_currentPosFile, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_currentPosFile, "HxMetEdCompCmd");
    }
    str = StrIStr(position);
    if( 0 == pos_file.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != pos_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    pos_file.RemoveFields();
  }

  private function CheckEmptyRacksBeforeTipPickUp( variable iNTRTipCounterName, sequence & iNTRTipSequence, sequence iNTRFrameWasteSequence, sequence ioCOREGrippersSequence, variable iTransportChoice, variable iChannelsForTransport, device & ML_STAR, variable iFinalRackInTier_TipDisposal, sequence & ioSeq_FinalTipInTierDestination, variable pipetting_tool, variable iNTRRackDisposalChoice, variable iMessage ) void {
    private variable gripper_present;
    private variable firstPosUsedInTier;
    private variable numberOfTipsRemainingInTier;
    private variable currentStack;
    private variable newNTRTipPosition;
    private variable numberOfTipsRemainingInRack;
    private variable eject_grippers;
    private variable calculatedRackTossPosition;
    private variable tipsPerColumn;
    private variable loopCounter1;
    private variable num_of_tips_per_rack;
    private variable currentLayer;
    private variable num_of_tiers;
    private variable first_stack_to_discard;
    private variable currentNTRSeqPosition;
    private variable NumOfNTRStacks;
    private variable num_of_racks_to_discard;
    private variable iSWAPGripDirection;
    private variable tipsRemainingThreshold;
    private variable numOfChannelsInstalled;
    private variable needToReload;
    private variable layer_to_discard;
    private variable indivColumnSelection;
    private variable sortByTier;
    private variable calculateRacksToDiscard;
    private variable total;
    private variable loopCounter2;
    private variable tipsPerTier;
    private variable trueRemainingTipsInRack;
    private variable currentTipPosInRack;
    private variable b_storeNewRackTossPosition;
    private variable numberOfTipsUsedInRack;
    private variable reset_storedRackToss;
    private variable tipsPerRow;
    needToReload = 1;
    {
      loopCounter2 = 0;
      while (needToReload == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        Read_Vars_for_NTRSeq(iNTRTipCounterName, NumOfNTRStacks, num_of_tips_per_rack, num_of_tiers, firstPosUsedInTier, sortByTier, indivColumnSelection);
        if (num_of_tips_per_rack == 384)
        {
          tipsPerColumn = 16;
          tipsPerRow = 24;
        }
        if (num_of_tips_per_rack == 96)
        {
          tipsPerColumn = 8;
          tipsPerRow = 12;
        }
        currentNTRSeqPosition = iNTRTipSequence.GetCurrentPosition();
        total = SeqGetTotal(iNTRTipSequence);
        TrcTrace(Translate("---- The current position of the NTR tip sequence is "), currentNTRSeqPosition);
        if (currentNTRSeqPosition == 0)
        {
          needToReload = 1;
        }
        else
        {
          needToReload = 0;
          if (pipetting_tool == "chn")
          {
            numOfChannelsInstalled = DevGetCfgValueWithKey(ML_STAR, 1);
            tipsRemainingThreshold = numOfChannelsInstalled;
          }
          else
          {
            tipsRemainingThreshold = tipsPerColumn;
            if (indivColumnSelection == 2)
            {
              tipsRemainingThreshold = tipsPerRow;
            }
          }
          CalculateCurrentStackAndTipsLeftinLayer(iNTRTipSequence, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, indivColumnSelection, sortByTier, currentStack, currentLayer, numberOfTipsRemainingInRack, numberOfTipsRemainingInTier, currentTipPosInRack);
          calculatedRackTossPosition = 0;
          newNTRTipPosition = currentNTRSeqPosition;
          trueRemainingTipsInRack = numberOfTipsRemainingInRack;
          TrcTrace4(Translate("Remaining tips in Tip Rack="), numberOfTipsRemainingInRack, Translate(";;;;;;;Remaining Tips in Tier="), numberOfTipsRemainingInTier);
          if (iNTRRackDisposalChoice == 0)
          {
            numberOfTipsUsedInRack = num_of_tips_per_rack - numberOfTipsRemainingInRack;
            reset_storedRackToss = 0;
            if (pipetting_tool == "chn")
            {
              if (numberOfTipsUsedInRack > 0)
              {
                if (numberOfTipsUsedInRack < numOfChannelsInstalled)
                {
                  if (currentNTRSeqPosition != firstPosUsedInTier)
                  {
                    onerror goto errLabel_3 ;
                    err.Clear();
                    Read_RackTossStoredPosition(calculatedRackTossPosition, iNTRTipCounterName);
                    num_of_racks_to_discard = 1;
                    reset_storedRackToss = 1;
                    errLabel_3 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      calculatedRackTossPosition = 0;
                    }   /* end if from skip handler if no error */
                  }
                }
              }
            }
            if (numberOfTipsRemainingInRack == num_of_tips_per_rack)
            {
              if (currentNTRSeqPosition == firstPosUsedInTier)
              {
                calculateRacksToDiscard = 0;
              }
              else
              {
                if (currentStack > 1)
                {
                  currentStack = currentStack - 1;
                  calculateRacksToDiscard = 1;
                }
                else
                {
                  currentStack = NumOfNTRStacks;
                  if (currentLayer == 1)
                  {
                    calculateRacksToDiscard = 0;
                  }
                  else
                  {
                    currentLayer = currentLayer - 1;
                    calculateRacksToDiscard = 1;
                  }
                }
              }
            }
          }
          if (iNTRRackDisposalChoice == 1)
          {
            tipsPerTier = NumOfNTRStacks * num_of_tips_per_rack;
            if (numberOfTipsRemainingInTier == tipsPerTier)
            {
              if (currentNTRSeqPosition == firstPosUsedInTier)
              {
                calculateRacksToDiscard = 0;
              }
              else
              {
                calculateRacksToDiscard = 1;
              }
            }
          }
          if (pipetting_tool == "chn")
          {
            if (numberOfTipsRemainingInRack < tipsRemainingThreshold)
            {
              calculateRacksToDiscard = 1;
            }
          }
          if (calculateRacksToDiscard == 1)
          {
            calculateRacksToDiscard = 0;
            if (iNTRRackDisposalChoice == 0)
            {
              b_storeNewRackTossPosition = 0;
              if (numberOfTipsRemainingInRack == num_of_tips_per_rack)
              {
                calculateRacksToDiscard = 1;
              }
              if (numberOfTipsRemainingInRack < tipsRemainingThreshold)
              {
                calculateRacksToDiscard = 1;
                if (numberOfTipsRemainingInTier > numberOfTipsRemainingInRack)
                {
                  b_storeNewRackTossPosition = 1;
                }
              }
              if (calculateRacksToDiscard == 1)
              {
                CalculateAbsoluteSeqPosition(currentStack, currentLayer, 1, sortByTier, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, calculatedRackTossPosition, indivColumnSelection);
                num_of_racks_to_discard = 1;
                first_stack_to_discard = currentStack;
                layer_to_discard = currentLayer;
                if (b_storeNewRackTossPosition == 1)
                {
                  StoreRackTossPosition(calculatedRackTossPosition, iNTRTipCounterName);
                  calculatedRackTossPosition = 0;
                }
                if (currentStack < NumOfNTRStacks)
                {
                  currentStack = currentStack + 1;
                  if(0){
                    CalculateAbsoluteSeqPosition(currentStack, currentLayer, 1, sortByTier, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, newNTRTipPosition, indivColumnSelection);
                  }
                }
                else
                {
                  currentStack = 1;
                  if (currentLayer < num_of_tiers)
                  {
                    currentLayer = currentLayer + 1;
                    CalculateAbsoluteSeqPosition(currentStack, currentLayer, 1, sortByTier, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, newNTRTipPosition, indivColumnSelection);
                  }
                  else
                  {
                    needToReload = 1;
                    calculatedRackTossPosition = 0;
                  }
                }
              }
            }
            if (iNTRRackDisposalChoice == 1)
            {
              if (numberOfTipsRemainingInTier == tipsPerTier)
              {
                calculateRacksToDiscard = 1;
              }
              if (numberOfTipsRemainingInTier < tipsRemainingThreshold)
              {
                calculateRacksToDiscard = 1;
              }
              if (calculateRacksToDiscard == 1)
              {
                iNTRTipSequence.SetCurrentPosition(firstPosUsedInTier);
                CalculateCurrentStackAndTipsLeftinLayer(iNTRTipSequence, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, indivColumnSelection, sortByTier, currentStack, currentLayer, numberOfTipsRemainingInRack, numberOfTipsRemainingInTier, currentTipPosInRack);
                if (sortByTier == 1)
                {
                  if (currentTipPosInRack < 89)
                  {
                    currentStack = 1;
                  }
                }
                CalculateAbsoluteSeqPosition(currentStack, currentLayer, 1, sortByTier, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, calculatedRackTossPosition, indivColumnSelection);
                first_stack_to_discard = currentStack;
                layer_to_discard = currentLayer;
                num_of_racks_to_discard = 0;
                num_of_racks_to_discard=NumOfNTRStacks-first_stack_to_discard+1;
                if (currentLayer < num_of_tiers)
                {
                  currentLayer = currentLayer + 1;
                  currentStack = 1;
                  CalculateAbsoluteSeqPosition(currentStack, currentLayer, 1, sortByTier, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, newNTRTipPosition, indivColumnSelection);
                  StorePosition(newNTRTipPosition, iNTRTipCounterName);
                }
                else
                {
                  needToReload = 1;
                  calculatedRackTossPosition = 0;
                }
              }
            }
          }
          if (calculatedRackTossPosition > 0)
          {
            if (iFinalRackInTier_TipDisposal == 1)
            {
              if (trueRemainingTipsInRack < numOfChannelsInstalled)
              {
                if (numberOfTipsRemainingInTier == trueRemainingTipsInRack)
                {
                  DiscardTipsWithChannels(iNTRTipSequence, trueRemainingTipsInRack, ML_STAR, numOfChannelsInstalled, currentNTRSeqPosition, ioSeq_FinalTipInTierDestination);
                }
              }
            }
            TrcTrace(Translate("-------------------------------START WASTE EMPTY RACKS -------------"), Translate(""));
            {
              for(loopCounter1 = 0; loopCounter1 < num_of_racks_to_discard;)
              {
                loopCounter1 = loopCounter1 + 1;
                if (loopCounter1 > 1)
                {
                  first_stack_to_discard = first_stack_to_discard + 1;
                  CalculateAbsoluteSeqPosition(first_stack_to_discard, layer_to_discard, 1, sortByTier, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, calculatedRackTossPosition, indivColumnSelection);
                }
                iNTRTipSequence.SetCurrentPosition(calculatedRackTossPosition);
                if (loopCounter1 == num_of_racks_to_discard)
                {
                  eject_grippers = 1;
                }
                else
                {
                  eject_grippers = 0;
                }
                if (loopCounter1 > 1)
                {
                  gripper_present = 1;
                }
                else
                {
                  gripper_present = 0;
                }
                NTR_to_waste_core_VENUS(ML_STAR, iNTRTipSequence, iNTRFrameWasteSequence, ioCOREGrippersSequence, gripper_present, eject_grippers, 1, iTransportChoice, iChannelsForTransport, iSWAPGripDirection);
              }
            }
            if (reset_storedRackToss == 1)
            {
              StoreRackTossPosition(0, iNTRTipCounterName);
            }
            TrcTrace(Translate("-------------------------------END WASTE EMPTY RACKS -------------"), Translate(""));
          }
        }
        if (needToReload == 1)
        {
          if (iFinalRackInTier_TipDisposal == 1)
          {
            if (trueRemainingTipsInRack < numOfChannelsInstalled)
            {
              DiscardTipsWithChannels(iNTRTipSequence, trueRemainingTipsInRack, ML_STAR, numOfChannelsInstalled, currentNTRSeqPosition, ioSeq_FinalTipInTierDestination);
            }
          }
          newNTRTipPosition = Show_NTR_Editor(iNTRTipSequence, iNTRTipCounterName, iMessage);
        }
      }
    }
    iNTRTipSequence.SetCurrentPosition(newNTRTipPosition);
    Tip_Counter_Write_Internal(iNTRTipSequence, iNTRTipCounterName);
  }

  private function CalculateAbsoluteSeqPosition( variable currentStack, variable currentLayer, variable tipPosInRack, variable sortByTier, variable NumberOfStacks, variable NumberOfLayers, variable tipsPerRack, variable & calculatedSeqPos, variable indivColumnSelection ) void {
    private variable tipsPerColumn;
    private variable tmpVal;
    private variable tmpCol;
    private variable tipsPerRow;
    calculatedSeqPos = 0;
    if (tipsPerRack == 384)
    {
      tipsPerColumn = 16;
      tipsPerRow = 24;
    }
    if (tipsPerRack == 96)
    {
      tipsPerColumn = 8;
      tipsPerRow = 12;
    }
    tmpVal = 0;
    tmpCol = 0;
        if(sortByTier==0){
                 if(indivColumnSelection!=2){
                      calculatedSeqPos = tipPosInRack + ((currentStack-1)*tipsPerRack) + ((currentLayer-1)*NumberOfStacks*tipsPerRack);
                 }
                 if(indivColumnSelection==2){
                      calculatedSeqPos = 1+ ((tipPosInRack-1)*tipsPerRow) + ((currentStack-1)*tipsPerRack) + ((currentLayer-1)*NumberOfStacks*tipsPerRack);
                 }
         }else{
                  tmpVal = tipPosInRack % tipsPerColumn;
                  tmpCol = tipPosInRack / tipsPerColumn;
                  if(tmpVal>0){tmpCol++;}
                  if(tmpVal==0){tmpVal= tipsPerColumn;}
                  calculatedSeqPos = ((currentStack -1)*tipsPerColumn) + (NumberOfStacks*tipsPerColumn*(tmpCol-1)) + ((currentLayer-1)*NumberOfStacks*tipsPerRack) + tmpVal;
         }
  }

  function NTR_Seq_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable sortByTier, variable iSingleColumnPickup, variable pipetting_tool, variable iNTRTipCounterName, variable iEditBoxTitleString ) void {
    private variable currentSeqPosition;
    _Analyze_Seq_to_build_NTR_GUI(ioNTRTipSequence, ML_STAR, sortByTier, iSingleColumnPickup, pipetting_tool, iNTRTipCounterName);
    currentSeqPosition = NTR_Tip_Counter_Read(ioNTRTipSequence, iNTRTipCounterName);
    ioNTRTipSequence.SetCurrentPosition(currentSeqPosition);
    Show_NTR_Editor(ioNTRTipSequence, iNTRTipCounterName, iEditBoxTitleString);
  }

  private function DiscardTipsWithChannels( sequence & iNTRTipSequence, variable remainingTipsInRack, device & ML_STAR, variable numOfChannelsInstalled, variable currentNTRSeqPosition, sequence & ioSeq_FinalTipInTierDestination ) void {
    private variable remainingPosInWasteRack;
    private variable chn_pattern;
    private variable tmpVal;
    chn_pattern = HSLChannelPattern::ChannelPattern_LeftAdjust(remainingTipsInRack, numOfChannelsInstalled);
    iNTRTipSequence.SetCurrentPosition(currentNTRSeqPosition);
    HSL_SEQDAILYTOOLS::GetNumberOfPositionsLeft(ioSeq_FinalTipInTierDestination, remainingPosInWasteRack);
    ML_STAR.TipPickUp("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");
    if (remainingPosInWasteRack >= remainingTipsInRack)
    {
      ML_STAR.TipEject("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");
    }
    else
    {
      if (remainingPosInWasteRack > 0)
      {
        chn_pattern = HSLChannelPattern::ChannelPattern_LeftAdjust(remainingPosInWasteRack, numOfChannelsInstalled);
        ML_STAR.TipEject("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");
        tmpVal = numOfChannelsInstalled - remainingPosInWasteRack;
        chn_pattern = HSLChannelPattern::ChannelPattern_RightAdjust(tmpVal, numOfChannelsInstalled);
      }
      ML_STAR.TipEject("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");
    }
  }

  function Reset_TipCounter( variable iTipCounterName ) void {
    private variable currentPosition;
    private variable db_fullPath;
    private variable sqlCommand;
    private file TIP_COUNT_UPDATE;
    sqlCommand = StrConcat8(Translate("UPDATE [TipCounters] SET [CurrentPosition] = "), 1, Translate(" WHERE [TipCounter] = '"), iTipCounterName, Translate("'"), Translate(""), Translate(""), Translate(""));
    A_DefineCustomizedTipManagement_db_path(db_fullPath);
    onerror goto errLabel_4 ;
    err.Clear();
    TIP_COUNT_UPDATE.AddField("TipCounter", iTipCounterName, hslString, 255);
    TIP_COUNT_UPDATE.AddField("CurrentPosition", currentPosition, hslInteger);
    if( 0 == TIP_COUNT_UPDATE.Open(db_fullPath + " " + "TipCounters", hslAppend, sqlCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
    }
    if( 0 != TIP_COUNT_UPDATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TIP_COUNT_UPDATE.RemoveFields();
    TrcTrace4(Translate("*** The Tip Counter  \""), iTipCounterName, Translate("\" has been reset to position 1 ****"), Translate(""));
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      TrcTrace4(Translate("*** The Tip Counter  \""), iTipCounterName, Translate("\" not found in db ****"), Translate(""));
    }   /* end if from skip handler if no error */
  }

  private function StoreRackTossPosition( variable position, variable iNTRTipCounter ) void {
    private variable Visual_NTR_currentPosFile;
    private variable LogfilePath;
    private variable str;
    private file pos_file;
    LogfilePath = FilGetLogFilesPath();
    Visual_NTR_currentPosFile = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate("_calculatedRackTossPos.txt"));
    pos_file.AddField(1, str, hslString);
    pos_file.SetDelimiter(hslAsciiText);
    if( 0 == pos_file.Open(Visual_NTR_currentPosFile, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_currentPosFile, "HxMetEdCompCmd");
    }
    str = StrIStr(position);
    if( 0 == pos_file.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != pos_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    pos_file.RemoveFields();
  }

  private function Read_RackTossStoredPosition( variable & position, variable iNTRTipCounter ) void {
    private variable Visual_NTR_currentPosFile;
    private variable LogfilePath;
    private variable str;
    private file pos_file;
    position = 0;
    LogfilePath = FilGetLogFilesPath();
    Visual_NTR_currentPosFile = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate("_calculatedRackTossPos.txt"));
    pos_file.AddField(1, str, hslString);
    pos_file.SetDelimiter(hslAsciiText);
    if( 0 == pos_file.Open(Visual_NTR_currentPosFile, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_currentPosFile, "HxMetEdCompCmd");
    }
    if( 0 == pos_file.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != pos_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    pos_file.RemoveFields();
    position = StrIVal(str);
  }

  private function _Analyze_Seq_to_build_NTR_GUI( sequence & iPlateStack_seq, device & ML_STAR, variable iSeqSortChoice, variable indivColumnsEditing, variable pipetting_tool, variable iNTRTipCounter ) void {
    private variable track_start;
    private variable str_tmp;
    private variable numberOfTipRacksInModule;
    private variable loopCounter_pos;
    private variable seqName;
    private variable tips_per_rack;
    private variable lib_path;
    private variable total_plates_in_sequence;
    private variable NumberOfCarriers;
    private variable new_plate;
    private variable labID;
    private variable currentPosition;
    private variable layer_counter;
    private variable strTrace;
    private variable tipsPerRow;
    private variable column_counter;
    private variable Visual_NTR_library_path;
    private variable str1;
    private variable sql_statement;
    private variable asp_angle;
    private variable str2;
    private variable seq_sort_file2;
    private variable loopCounter12;
    private variable positions_added_in_tier;
    private variable strPosition;
    private variable track_end;
    private variable loopCounter_plateStackSeq;
    private variable all_stacks_tracked;
    private variable arr_size;
    private variable current_x;
    private variable car_tracks;
    private variable tmp_x;
    private variable Visual_NTR_varstxt_path;
    private variable firstStack_x;
    private variable number_of_stack_modules;
    private variable tipsPerTier;
    private variable asp_pos_id;
    private variable tmp_y;
    private variable firstStack_y;
    private variable stack_counter;
    private variable posID;
    private variable carrier_index;
    private variable tipsPerColumn;
    private variable LogfilePath;
    private variable str;
    private variable tmpVal;
    private variable loopCounter1;
    private variable num_plates_per_stack_module;
    private variable loopCounter2;
    private variable seq_sort_file;
    private variable labID2;
    private variable current_column;
    private variable str_separator;
    private variable asp_y_coord;
    private variable asp_x_coord;
    private variable row_counter;
    private variable NumOfNTRStacks;
    private variable current_row;
    private variable asp_z_coord;
    private variable asp_lab_id;
    private variable num_pos_per_plate;
    private variable loopCounter6;
    private sequence iNTR_seq;
    private sequence horizontalSeq;
    private file seq_sort;
    private file vars_file;
    private variable arr_getSeq_LabIDs[];
    private variable arr_racks_x[];
    private variable arr_racks_y[];
    private variable arr_labIDs[];
    private variable arr_putSeq_LabIDs[];
    private variable array_posIDs_onePlate[];
    private variable arr_carrier_indexes[];
    private variable arr_carrier_tracks[];
    MECC::TraceComment(Translate("-----> Visual NTR library v1.44  <----"));
    TrcTrace(Translate("------------------------ Parameters summary ---------------------"), Translate(""));
    seqName = SeqGetName(iNTR_seq);
    TrcTrace(Translate("---------------------------- Tip Sequence = "), seqName);
    TrcTrace(Translate("---------------------------- Tip Counter = "), iNTRTipCounter);
    if (indivColumnsEditing == 1)
    {
      TrcTrace(Translate("---------------------------- Column Selection  = "), Translate(" Allowed"));
    }
    else
    {
      TrcTrace(Translate("---------------------------- Column Selection = "), Translate(" NOT allowed"));
    }
    if (iSeqSortChoice == 1)
    {
      TrcTrace(Translate("---------------------------- Sorting = "), Translate(" whole tier columns "));
    }
    else
    {
      TrcTrace(Translate("---------------------------- Sorting = "), Translate(" rack columns "));
    }
    if (pipetting_tool == "mph")
    {
      TrcTrace(Translate("---------------------------- Pipetting tool =  "), Translate("MPH"));
    }
    if (pipetting_tool == "chn")
    {
      TrcTrace(Translate("---------------------------- Pipetting tool =  "), Translate("Channels"));
    }
    arr_racks_x.SetSize(0);
    arr_racks_y.SetSize(0);
    arr_carrier_tracks.SetSize(0);
    arr_carrier_indexes.SetSize(0);
    array_posIDs_onePlate.SetSize(0);
    SeqGetLabwareIds(iPlateStack_seq, arr_labIDs);
    iPlateStack_seq.SetCurrentPosition(1);
    HSL_GetNumOfDefPosInRack::GetNumOfDefPosInRack(ML_STAR, iPlateStack_seq, num_pos_per_plate);
    if(0){
      iPlateStack_seq.SetCurrentPosition(1);
      labID = SeqGetLabwareId(iPlateStack_seq);
      new_plate = 0;
      {
        loopCounter_plateStackSeq = 0;
        while (1 == 1)
        {
          loopCounter_plateStackSeq = loopCounter_plateStackSeq + 1;
          posID = SeqGetPositionId(iPlateStack_seq);
          array_posIDs_onePlate.AddAsLast(posID);
          SeqIncrement(iPlateStack_seq, 1);
          if (posID == "1")
          {
            new_plate = 1;
          }
          if (posID == "")
          {
            new_plate = 1;
          }
          if (new_plate == 1)
          {
            if (loopCounter_plateStackSeq > 1)
            {
              labID2 = SeqGetLabwareId(iPlateStack_seq);
              if (labID != labID2)
              {
                num_pos_per_plate = loopCounter_plateStackSeq - 0;
                break;
              }
            }
          }
        }
      }
    }
    total_plates_in_sequence=arr_labIDs.GetSize();
    arr_putSeq_LabIDs.SetSize(total_plates_in_sequence);
    LogfilePath = FilGetLogFilesPath();
    seq_sort_file = StrConcat4(LogfilePath, Translate("\\"), Translate("TemporaryFileForSorting.xls"), Translate(""));
    if(0){
      seq_sort_file2 = StrConcat4(LogfilePath, Translate("\\"), Translate("TemporaryFileForSorting2.xls"), Translate(""));
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    if(0){
      HSLMapReport::DeleteFile(seq_sort_file2);
    }
    seq_sort.AddField("asp_lab_id", asp_lab_id, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslInteger);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      for(loopCounter_plateStackSeq = 0; loopCounter_plateStackSeq < total_plates_in_sequence;)
      {
        loopCounter_plateStackSeq = loopCounter_plateStackSeq + 1;
        asp_lab_id=arr_labIDs.GetAt(loopCounter_plateStackSeq-1);
        DevGetLabwarePositionEx(ML_STAR, asp_lab_id, Translate("1"), asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    arr_getSeq_LabIDs.SetSize(0);
    sql_statement = "SELECT * FROM sheet1 ORDER BY asp_z_coord DESC, asp_lab_id ASC, asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_lab_id, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslInteger);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    carrier_index = 0;
    number_of_stack_modules = 0;
    num_plates_per_stack_module = 1;
    current_x = 0;
    {
      loopCounter2 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (loopCounter2 == 1)
        {
          firstStack_x = asp_x_coord;
          firstStack_y = asp_y_coord;
          all_stacks_tracked = 0;
        }
        else
        {
          if(asp_y_coord == firstStack_y && asp_x_coord == firstStack_x){
            all_stacks_tracked=1;
            num_plates_per_stack_module = num_plates_per_stack_module + 1;
          }
        }
        if (all_stacks_tracked == 0)
        {
          number_of_stack_modules = number_of_stack_modules + 1;
          arr_racks_y.AddAsLast(asp_y_coord);
          if (asp_x_coord != current_x)
          {
            carrier_index = carrier_index + 1;
            current_x = asp_x_coord;
          }
          arr_racks_x.AddAsLast(asp_x_coord);
          arr_carrier_indexes.AddAsLast(carrier_index);
          track_start = 0;
          track_end = 0;
          TrcTrace(Translate("=====asp_x_coord = "), asp_x_coord);
          track_start = ((asp_x_coord-117.9)/22.5) + 1;
          track_end = track_start  + 5;
          TrcTrace(Translate("=====track_start = "), track_start);
          TrcTrace(Translate("=====track_end = "), track_end);
          track_start = MthFloor(track_start);
          track_end = MthFloor(track_end);
          TrcTrace(Translate("=====track_start = "), track_start);
          TrcTrace(Translate("=====track_end = "), track_end);
          str = StrConcat4(Translate("Tracks "), track_start, Translate(" to "), track_end);
          arr_carrier_tracks.AddAsLast(str);
          if(0){
            Trace ("-- Recorded X=" ,asp_x_coord, "    Y=", asp_y_coord);
          }
        }
        arr_getSeq_LabIDs.AddAsLast(asp_lab_id);
        if(0){
          Trace ("* Current rack  :" , asp_lab_id);
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    NumOfNTRStacks = number_of_stack_modules;
    tips_per_rack = num_pos_per_plate;
    numberOfTipRacksInModule = num_plates_per_stack_module;
    TrcTrace(Translate("----- Total number of tip racks in the sequence ="), total_plates_in_sequence);
    TrcTrace(Translate("----- Total number of stacks ="), number_of_stack_modules);
    TrcTrace(Translate("----- Total number of positions per tip rack ="), num_pos_per_plate);
    TrcTrace(Translate("----- Total number of layers per stack tower ="), num_plates_per_stack_module);
    NumberOfCarriers=arr_carrier_indexes.GetAt(number_of_stack_modules-1);
    TrcTrace(Translate("----- Total Carriers = "), NumberOfCarriers);
    lib_path = FilGetLibraryPath();
    Visual_NTR_library_path = StrConcat2(lib_path, Translate("\\Visual_NTR_library\\"));
    Visual_NTR_varstxt_path = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate(".txt"));
    str = Translate("");
    arr_size=arr_racks_x.GetSize();
    {
      for(loopCounter6 = 0; loopCounter6 < arr_size;)
      {
        loopCounter6 = loopCounter6 + 1;
        tmp_x=arr_racks_x.GetAt(loopCounter6-1);
        tmp_y=arr_racks_y.GetAt(loopCounter6-1);
        tmpVal=arr_carrier_indexes.GetAt(loopCounter6-1);
        car_tracks=arr_carrier_tracks.GetAt(loopCounter6-1);
        str1 = StrFStr(tmp_x);
        str2 = StrFStr(tmp_y);
        if (loopCounter6 == arr_size)
        {
          str_separator = Translate("");
        }
        else
        {
          str_separator = Translate("//");
        }
        str_tmp = StrConcat8(str1, Translate(","), str2, Translate(","), tmpVal, Translate(","), car_tracks, str_separator);
        str = StrConcat2(str, str_tmp);
        if(0){
          strTrace = StrConcat12(Translate("-----------------------------------------------------------------"), Translate("x= "), str1, Translate(" // y= "), str2, Translate("// Number of Layers= "), numberOfTipRacksInModule, Translate(" // "), car_tracks, Translate(" // Carrier Index = "), tmpVal, Translate(""));
        }
      }
    }
    vars_file.AddField(1, str, hslString);
    vars_file.SetDelimiter(hslAsciiText);
    if( 0 == vars_file.Open(Visual_NTR_varstxt_path, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_varstxt_path, "HxMetEdCompCmd");
    }
    if( 0 == vars_file.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    str = Translate("\n");
    if( 0 == vars_file.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NumOfNTRStacks = arr_size;
    str = StrConcat12(tips_per_rack, Translate(","), numberOfTipRacksInModule, Translate(","), NumOfNTRStacks, Translate(","), NumberOfCarriers, Translate(","), pipetting_tool, Translate(","), iSeqSortChoice, Translate(","));
    str = StrConcat4(str, indivColumnsEditing, Translate(""), Translate(""));
    if( 0 == vars_file.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != vars_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    vars_file.RemoveFields();
    if(0){
      TrcTrace(Translate("Total NTR stacks = "), arr_size);
      TrcTrace(Translate("Total layers in full sequence = "), numberOfTipRacksInModule);
      TrcTrace(Translate("Total Carriers = "), NumberOfCarriers);
      TrcTrace(Translate("Total tips per rack = "), tips_per_rack);
    }
    SeqRemoveAll(iPlateStack_seq);
    {
      for(loopCounter1 = 0; loopCounter1 < total_plates_in_sequence;)
      {
        loopCounter1 = loopCounter1 + 1;
        labID=arr_getSeq_LabIDs.GetAt(loopCounter1-1);
        {
          for(loopCounter_pos = 0; loopCounter_pos < num_pos_per_plate;)
          {
            loopCounter_pos = loopCounter_pos + 1;
            posID = StrIStr(loopCounter_pos);
            SeqAdd(iPlateStack_seq, labID, posID);
          }
        }
      }
    }
    iPlateStack_seq.SetCurrentPosition(1);
    if(0){
      if (iSeqSortChoice == 1)
      {
        MECC::TraceComment(Translate("Sort sequence by tier"));
        SeqCopySequence(horizontalSeq, iPlateStack_seq);
        SeqRemoveAll(iPlateStack_seq);
        tipsPerTier = NumOfNTRStacks * tips_per_rack;
        if (tips_per_rack == 384)
        {
          tipsPerColumn = 16;
        }
        if (tips_per_rack == 96)
        {
          tipsPerColumn = 8;
        }
        currentPosition = 0;
        {
          for(layer_counter = 0; layer_counter < numberOfTipRacksInModule;)
          {
            layer_counter = layer_counter + 1;
            positions_added_in_tier = 0;
            current_column = 0;
            {
              loopCounter12 = 0;
              while (positions_added_in_tier < tipsPerTier)
              {
                loopCounter12 = loopCounter12 + 1;
                current_column = current_column + 1;
                {
                  for(stack_counter = 0; stack_counter < NumOfNTRStacks;)
                  {
                    stack_counter = stack_counter + 1;
                    currentPosition = 1+ ((current_column-1)*tipsPerColumn) + ((stack_counter-1)*tips_per_rack) + (tips_per_rack*NumOfNTRStacks*(layer_counter-1));
                    horizontalSeq.SetCurrentPosition(currentPosition);
                    labID = SeqGetLabwareId(horizontalSeq);
                    {
                      for(column_counter = 0; column_counter < tipsPerColumn;)
                      {
                        column_counter = column_counter + 1;
                        strPosition = Translate("1");
                        strPosition = StrIStr(column_counter + ((current_column-1)*tipsPerColumn));
                        SeqAdd(iPlateStack_seq, labID, strPosition);
                        positions_added_in_tier = positions_added_in_tier + 1;
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
      if (indivColumnsEditing == 2)
      {
        SeqCopySequence(horizontalSeq, iPlateStack_seq);
        SeqRemoveAll(iPlateStack_seq);
        tipsPerTier = NumOfNTRStacks * tips_per_rack;
        if (tips_per_rack == 384)
        {
          tipsPerRow = 24;
          tipsPerColumn = 16;
        }
        if (tips_per_rack == 96)
        {
          tipsPerRow = 12;
          tipsPerColumn = 8;
        }
        currentPosition = 0;
        {
          for(layer_counter = 0; layer_counter < numberOfTipRacksInModule;)
          {
            layer_counter = layer_counter + 1;
            positions_added_in_tier = 0;
            current_row = 0;
            {
              loopCounter12 = 0;
              while (positions_added_in_tier < tipsPerTier)
              {
                loopCounter12 = loopCounter12 + 1;
                current_row = current_row + 1;
                {
                  for(stack_counter = 0; stack_counter < NumOfNTRStacks;)
                  {
                    stack_counter = stack_counter + 1;
                    currentPosition = 1+ ((stack_counter-1)*tips_per_rack) + (tips_per_rack*NumOfNTRStacks*(layer_counter-1));
                    horizontalSeq.SetCurrentPosition(currentPosition);
                    labID = SeqGetLabwareId(horizontalSeq);
                    strPosition = Translate("1");
                    {
                      for(column_counter = 0; column_counter < tipsPerColumn;)
                      {
                        column_counter = column_counter + 1;
                        {
                        for(row_counter = 0; row_counter < tipsPerRow;)
                        {
                        row_counter = row_counter + 1;
                        strPosition = StrIStr((column_counter)+(tipsPerColumn*(row_counter-1)));
                        SeqAdd(iPlateStack_seq, labID, strPosition);
                        positions_added_in_tier = positions_added_in_tier + 1;
                        }
                        }
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
  }
} // library namespace
