#pragma once
#include "HSLFilLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLFileDirectoryLib.hsl"
#include "VirtualLabware_V2.hsl"
#include "HSLTrcLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace VARICOLUMN_96HEAD {
  function Load_GUI( variable _intColumnCount, variable _trace ) variable ;
  function PipettingOffset(  ) void ;
  function Tip_Eject_Column( device & ML_STAR, variable _intEjectLocation ) void ;
  function Tip_PickUp_Column( device & ML_STAR, sequence & _seqTips, sequence & _seqTips_Stock ) void ;
  private function _AccessTempColumnCount( variable _bln, variable & _int, variable _trace ) void ;
  private function _AccessTipTracker( variable _bln, variable & _int, variable _trace ) void ;
  private function _LoadTipRack( device & ML_STAR, sequence & _seqTipSource, sequence & _seqTipDest ) void ;
  function _zFileAccess( variable _bln, variable & _int, variable _trace, variable _strFilePath, variable _StrTable ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Tip_PickUp_Column( device & ML_STAR, sequence & _seqTips, sequence & _seqTips_Stock ) void {
    private variable _strColumnFilePath;
    private variable _intXOffset;
    private variable _intNumberOfColumns;
    private file _hndFile;
    private variable _intSeqIncrement;
    private variable _intInactiveColumns;
    private variable _intNumberOfTipColumns;
    private variable _strRackTrackFilePath;
    private variable _intTipsNeeded;
    private variable _strRackFilePath;
    private variable _intTipsToLoad;
    private variable _intTipsReady;
    private sequence seq;
    private variable _intTipCount_New;
    private variable _intColumnsReady;
    private variable _fltColumnsReady;
    private variable _intColumnsMissing;
    private variable _intPartialOffset;
    MECC::TraceComment(Translate("#######################################\n\n                 TIP PICK UP --- COLUMN\n\n#######################################"));
    _AccessTempColumnCount(0, _intNumberOfColumns, 1);
    _intTipsToLoad = 8 * _intNumberOfColumns;
    TrcTrace(Translate("///// Tips needed: "), _intTipsToLoad);
    _AccessTipTracker(0, _intTipsReady, 1);
    TrcTrace(Translate("///// Tips available: "), _intTipsReady);
    if (_intTipsNeeded > _intTipsReady)
    {
      _LoadTipRack(ML_STAR, _seqTips, _seqTips_Stock);
    }
    _intInactiveColumns = 12 - _intNumberOfColumns;
    _intXOffset = _intInactiveColumns * -9;
    _fltColumnsReady = _intTipsReady / (8 * 1.0);
    _fltColumnsReady = MthCeiling(_fltColumnsReady);
    _intColumnsMissing = 12 - _intColumnsReady;
    if (_intColumnsMissing != 0)
    {
      _intPartialOffset = _intColumnsMissing * 9;
      _intXOffset = _intXOffset + _intPartialOffset;
    }
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqTips, _intXOffset, 0, 0);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    _intXOffset = _intXOffset * -1;
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqTips, _intXOffset, 0, 0);
    _intSeqIncrement = _intNumberOfColumns * 8;
    SeqIncrement(_seqTips, _intSeqIncrement);
    _intTipCount_New = _intTipsReady - _intTipsToLoad;
    _AccessTipTracker(1, _intTipCount_New, 1);
  }

  function Load_GUI( variable _intColumnCount, variable _trace ) variable {
    private variable _intNumberOfColumns;
    private variable _blnError;
    private variable _strBinFilePath;
    private variable _strColumnFilePath;
    private variable _blnCheck;
    private file _hndFile;
    private variable _strType;
    private variable _strRackTrackFilePath;
    private variable _intColumnNum;
    private variable _intNumberOfTips;
    private dialog customDialog_1;
    private variable _rtnValue;
    _strType = StrGetType(_intColumnCount);
    if (_strType == "i")
    {
      _blnError = 0;
      if (_intNumberOfColumns > 12)
      {
        _blnError = 1;
      }
      if (_intNumberOfColumns < 1)
      {
        _blnError = 1;
      }
      if (_blnError == 1)
      {
        return (0);
      }
    }
    else
    {
      if (_strType == "s")
      {
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        _rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        _intNumberOfColumns = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
      }
      else
      {
        return (0);
      }
    }
    _AccessTempColumnCount(1, _intNumberOfColumns, _trace);
    if (_trace == 1)
    {
      TrcTrace(Translate("----- Load GUI successful"), Translate(""));
    }
  }

  private function _AccessTempColumnCount( variable _bln, variable & _int, variable _trace ) void {
    private variable _strFilePath;
    private file _hnd;
    private variable _strFolderPath;
    private variable _strColumnName;
    private variable _rtnSuccess;
    _strFolderPath = FilGetBinPath();
    _strFilePath = StrConcat2(_strFolderPath, Translate("\TempColumnCount.txt"));
    if (_trace == 1)
    {
      TrcTrace(Translate("----- _strFilePath: "), _strFilePath);
    }
    _strColumnName = Translate("Number Of Columns");
    _zFileAccess(_bln, _int, _trace, _strFilePath, _strColumnName);
  }

  function PipettingOffset(  ) void {
  }

  function Tip_Eject_Column( device & ML_STAR, variable _intEjectLocation ) void {
    private variable _intXOffset;
    private sequence _seqTips;
    private variable _intNumberOfColumns;
    private variable _intTipsToLoad;
    MECC::TraceComment(Translate("#######################################\n\n                    TIP EJECT --- COLUMN\n\n#######################################"));
    _AccessTempColumnCount(0, _intNumberOfColumns, 1);
    _intTipsToLoad = 8 * _intNumberOfColumns;
    TrcTrace(Translate("///// _intTipsToLoad: "), _intTipsToLoad);
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqTips, _intXOffset, 0, 0);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    _intXOffset = _intXOffset * -1;
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqTips, _intXOffset, 0, 0);
  }

  private function _LoadTipRack( device & ML_STAR, sequence & _seqTipSource, sequence & _seqTipDest ) void {
    private variable _intTipsLoaded;
    private variable _intTipsReady;
    MECC::TraceComment(Translate("#######################################\n\n                 LOAD TEMP TIP RACK\n\n#######################################"));
    _AccessTipTracker(0, _intTipsReady, 1);
    if (_intTipsReady > 0)
    {
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      _seqTipDest.SetCurrentPosition(1);
    }
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    _intTipsLoaded = 96;
    _AccessTipTracker(1, _intTipsLoaded, 1);
  }

  private function _AccessTipTracker( variable _bln, variable & _int, variable _trace ) void {
    private variable _strFolderPath;
    private variable _strFilePath;
    private variable _strColumnName;
    private file _hnd;
    private variable _rtnSuccess;
    private variable _strTable;
    _strFolderPath = FilGetConfigPath();
    _strFilePath = StrConcat2(_strFolderPath, Translate("\\WSI_VariColumnTracker.mdb"));
    _strTable = Translate("AdaptorTipTracker");
    _zFileAccess(_bln, _int, _trace, _strFilePath, _strColumnName);
  }

  function _zFileAccess( variable _bln, variable & _int, variable _trace, variable _strFilePath, variable _StrTable ) void {
    private variable _rtnSuccess;
    private file _hnd;
    private variable _strTable;
    private file file1;
    private variable _strSQLStatement;
    private variable _strTipType;
    if (_bln == 0)
    {
      if (_trace == 1)
      {
        TrcTrace(Translate("----- Reading file"), Translate(""));
      }
      _rtnSuccess = FileDirectoryLib::CheckIfFileExists(_strFilePath);
      if (_rtnSuccess == 0)
      {
        if (_trace == 1)
        {
          TrcTrace(Translate("----- Did not find file"), Translate(""));
        }
        abort;
      }
      _strSQLStatement = StrConcat4(Translate("SELECT COUNT (AvailableTips) FROM ["), _strTable, Translate("$]"), Translate(""));
      file1.AddField("TipType", _strTipType, hslString, 255);
      file1.AddField("AvailableTips", _int, hslString, 255);
      if( 0 == file1.Open(_strFilePath + " " + _strTable, hslRead, _strSQLStatement) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFilePath, "HxMetEdCompCmd");
      }
      if( 0 == _hnd.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != _hnd.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hnd.RemoveFields();
      if (_trace == 1)
      {
        TrcTrace(Translate("----- Successfully read file"), Translate(""));
      }
    }
    else
    {
      if (_bln == 1)
      {
        _hnd.AddField(_StrTable, _int, hslInteger);
        _hnd.SetDelimiter(hslCSVDelimited);
        if( 0 == _hnd.Open(_strFilePath, hslWrite) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFilePath, "HxMetEdCompCmd");
        }
        if( 0 == _hnd.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != _hnd.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _hnd.RemoveFields();
        if (_trace == 1)
        {
          TrcTrace(Translate("----- Successfully wrote to file"), Translate(""));
          TrcTrace(Translate("----- value written: "), _int);
        }
      }
      else
      {
        if (_trace == 1)
        {
          TrcTrace(Translate("----- Invalid input"), Translate(""));
        }
        abort;
      }
    }
  }
} // library namespace
