#pragma once
#include "Hamilton HSLCap\\HSLCap.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace SCAP_STARPLUS {
  variable _devScap1;
  variable _devScap2;
  function Connect( variable _intComport1, variable _intComport2, variable _blnTraceLevel, variable _blnSimMode ) void ;
  function Disconnect(  ) void ;
  function GetDoorState(  ) void ;
  function GetFanSpeed(  ) void ;
  function GetFanState(  ) void ;
  function GetHepaFilterStatus(  ) void ;
  function GetHumidity(  ) void ;
  function GetLightState(  ) void ;
  function GetPrefilterStatus(  ) void ;
  function GetTemperature(  ) void ;
  function SetFanSpeed( variable _intFanSpeed ) void ;
  function SetFanState( variable _blnFanState ) void ;
  function SetLightState( variable _blnLightState ) void ;
  private function _Error( variable _intErrorCode ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Connect( variable _intComport1, variable _intComport2, variable _blnTraceLevel, variable _blnSimMode ) void {
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::Connect -- Start <<<<<"));
    if (_blnTraceLevel == 1)
    {
      HSLCap::SetTraceLevel(HSLCap::TRACE_LEVEL_DEBUG);
    }
    else
    {
      HSLCap::SetTraceLevel(HSLCap::TRACE_LEVEL_RELEASE);
    }
    if (_blnSimMode == 1)
    {
      _rtnCode = HSLCap::OverrideSimulation(HSLCap::_TRUE);
    }
    else
    {
      _rtnCode = HSLCap::OverrideSimulation(HSLCap::_FALSE);
    }
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    _rtnCode = HSLCap::Connect(_intComport1, _devScap1);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    _rtnCode = HSLCap::Connect(_intComport2, _devScap2);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    MECC::TraceComment(Translate(">>>>> HSLCap::Connect -- Complete <<<<<"));
  }

  function Disconnect(  ) void {
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::Disconnect -- Start <<<<<"));
    _rtnCode = HSLCap::Disconnect(_devScap1);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    _rtnCode = HSLCap::Disconnect(_devScap2);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    MECC::TraceComment(Translate(">>>>> HSLCap::Disconnect -- Complete <<<<<"));
  }

  function GetDoorState(  ) void {
    private variable _blnDoorState1;
    private variable _blnDoorState2;
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetDoorState -- Start <<<<<"));
    _rtnCode = HSLCap::GetDoorState(_devScap1, _blnDoorState1);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _blnDoorState1 = "), _blnDoorState1);
    _rtnCode = HSLCap::GetDoorState(_devScap2, _blnDoorState2);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _blnDoorState2 = "), _blnDoorState2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetDoorState -- Complete <<<<<"));
  }

  private function _Error( variable _intErrorCode ) void {
    private variable _rtnCode;
    private variable _strErrorMessage;
    TrcTrace(Translate("----- _rtnCode = "), _rtnCode);
    HSLCap::GetLastErrorMessage(_devScap1, _strErrorMessage);
    abort;
  }

  function GetFanSpeed(  ) void {
    private variable _intFanSpeed1;
    private variable _intFanSpeed2;
    private variable _blnDoorState1;
    private variable _blnDoorState2;
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanSpeed -- Start <<<<<"));
    _rtnCode = HSLCap::GetFanSpeed(_devScap1, _intFanSpeed1);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _intFanSpeed1 = "), _intFanSpeed1);
    _rtnCode = HSLCap::GetFanSpeed(_devScap2, _intFanSpeed2);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _intFanSpeed2 = "), _intFanSpeed2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanSpeed -- Complete <<<<<"));
  }

  function GetFanState(  ) void {
    private variable _intFanSpeed1;
    private variable _intFanSpeed2;
    private variable _intFanState1;
    private variable _intFanState2;
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanState -- Start <<<<<"));
    _rtnCode = HSLCap::GetFanState(_devScap1, _intFanState1);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _intFanState1 = "), _intFanState1);
    _rtnCode = HSLCap::GetFanState(_devScap2, _intFanState2);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _intFanState2 = "), _intFanState2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanState -- Complete <<<<<"));
  }

  function GetHepaFilterStatus(  ) void {
    private variable _intFanState1;
    private variable _intFanState2;
    private variable _rtnCode;
    private variable _strHepaFilterStatus1;
    private variable _strHepaFilterStatus2;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetHepaFilterStatus -- Start <<<<<"));
    _rtnCode = HSLCap::GetHepaFilterStatus(_devScap1, _strHepaFilterStatus1);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _strHepaFilterStatus2 = "), _strHepaFilterStatus2);
    _rtnCode = HSLCap::GetHepaFilterStatus(_devScap2, _strHepaFilterStatus2);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _strHepaFilterStatus2 = "), _strHepaFilterStatus2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetHepaFilterStatus  -- Complete <<<<<"));
  }

  function GetHumidity(  ) void {
    private variable _intFanState1;
    private variable _intFanState2;
    private variable _rtnCode;
    private variable _fltHumidity1;
    private variable _fltHumidity2;
    private variable _fltHumidity;
    _rtnCode = HSLCap::GetHumidity(_devScap1, _fltHumidity1);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _fltHumidity1 = "), _fltHumidity1);
    _rtnCode = HSLCap::GetHumidity(_devScap2, _fltHumidity2);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _fltHumidity2 = "), _fltHumidity2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetHumidity -- Complete <<<<<"));
  }

  function GetLightState(  ) void {
    private variable _intFanState1;
    private variable _intFanState2;
    private variable _rtnCode;
    private variable _intLightState1;
    private variable _intLightState2;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetLightState -- Start <<<<<"));
    _rtnCode = HSLCap::GetLightState(_devScap1, _intLightState1);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _intLightState1 = "), _intLightState1);
    _rtnCode = HSLCap::GetLightState(_devScap2, _intLightState2);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _intLightState2 = "), _intLightState2);
  }

  function GetPrefilterStatus(  ) void {
    private variable _intFanState1;
    private variable _intFanState2;
    private variable _rtnCode;
    private variable _strPrefilterStatus1;
    private variable _strPrefilterStatus2;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetPrefilterStatus -- Start <<<<<"));
    _rtnCode = HSLCap::GetPrefilterStatus(_devScap1, _strPrefilterStatus1);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _strPrefilterStatus1 = "), _strPrefilterStatus1);
    _rtnCode = HSLCap::GetPrefilterStatus(_devScap2, _strPrefilterStatus2);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _strPrefilterStatus2 = "), _strPrefilterStatus2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetPrefilterStatus -- Complete <<<<<"));
  }

  function GetTemperature(  ) void {
    private variable _intFanState1;
    private variable _intFanState2;
    private variable _rtnCode;
    private variable _strTemp1;
    private variable _strTemp2;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetTemperature -- Start <<<<<"));
    _rtnCode = HSLCap::GetTemperature(_devScap1, _strTemp1);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _strTemp2 = "), _strTemp2);
    _rtnCode = HSLCap::GetTemperature(_devScap2, _strTemp2);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    TrcTrace(Translate("----- _strTemp2 = "), _strTemp2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetTemperature -- Complete <<<<<"));
  }

  function SetFanSpeed( variable _intFanSpeed ) void {
    private variable _intFanState1;
    private variable _intFanState2;
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::SetFanSpeed -- Start <<<<<"));
    _rtnCode = HSLCap::SetFanSpeed(_devScap1, _intFanSpeed);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    _rtnCode = HSLCap::SetFanSpeed(_devScap2, _intFanSpeed);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    MECC::TraceComment(Translate(">>>>> HSLCap::SetFanSpeed -- Complete <<<<<"));
  }

  function SetFanState( variable _blnFanState ) void {
    private variable _intFanState1;
    private variable _intFanState2;
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::SetFanState -- Start <<<<<"));
    _rtnCode = HSLCap::SetFanState(_devScap1, _blnFanState);
    _rtnCode = HSLCap::GetFanState(_devScap1, _blnFanState);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    _rtnCode = HSLCap::SetFanState(_devScap2, _blnFanState);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    MECC::TraceComment(Translate(">>>>> HSLCap::SetFanState -- Complete <<<<<"));
  }

  function SetLightState( variable _blnLightState ) void {
    private variable _intFanState1;
    private variable _intFanState2;
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::SetLightState -- Start <<<<<"));
    _rtnCode = HSLCap::SetLightState(_devScap1, _blnLightState);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    _rtnCode = HSLCap::SetLightState(_devScap2, _blnLightState);
    if (_rtnCode != 0)
    {
      _Error(_rtnCode);
    }
    MECC::TraceComment(Translate(">>>>> HSLCap::SetLightState -- Complete <<<<<"));
  }
} // library namespace
