#pragma once
#include "HSLStrLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLFilLib.hsl"
#include "HSLTimLib.hsl"
#include "WSI\\AswStatusDialog_WSI.hsl"
#include "WSI\\HSLGetSerialNumber_WSI.hsl"
#include "HSLMthLib.hsl"
#include "HSLExtensions\\String.hsl"
#include "lookup.hs_"
#include "HSLSeqLib.hsl"
#include "HSLDevLib.hsl"
#include "load_instructions.hs_"
#include "MLSTARLiquidClassLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLUtilLib2.hsl"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace SANGERGENERAL {
  variable _strAcessDBFilePath;
  variable _strConfigFolderPath;
  function CleaningDecision( variable _blnAdmin ) variable ;
  function DoorLock( device & ML_STAR, variable _blnSim, variable _blnLock ) void ;
  function FourWellHandling( sequence & _seq, variable _strCP, variable _intWellCount ) variable ;
  function ReloadTips( device & ML_STAR, sequence & _seqTip, variable _strTipCounter ) void ;
  function StatusDisplay_Init(  ) variable ;
  function StatusDisplay_Update( variable _strMessage1, variable _strMessage2 ) variable ;
  function TipCheck( sequence & _seqTips, variable _strTipCounter, variable _intTipsNeeded ) variable ;
  function TipPickup( device & ML_STAR, variable _strChannelPattern, sequence & _seqTip, variable _strTipCounter ) void ;
  function UserCheck( variable & _strUserPrefix, variable & _blnAdvanced ) void ;
  function VolumePlausibilityCheck( variable _intVolumeToTransfer, variable _strLC ) void ;
  function WorklistEntryValidation( variable varEntry, variable blnRemoveSpaces ) variable ;
  private function _DefineDBFilePath(  ) void ;
  private function z_AdminDetect( variable _strUser, variable & _blnAdmin ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOOKUP::_InitLibrary();
    LOAD_INSTRUCTIONS::_InitLibrary();
    LPQ::_InitLibrary();
  }
  function _ExitLibrary() {
    LOOKUP::_ExitLibrary();
    LOAD_INSTRUCTIONS::_ExitLibrary();
    LPQ::_ExitLibrary();
  }

  private function z_AdminDetect( variable _strUser, variable & _blnAdmin ) variable {
    private variable _arrValidCharacters[];
    private variable _arrUserIDCharacters[];
    private variable _intNumberOfUserIDCharacters;
    private variable loopCounter1;
    private variable _intLookupReturn;
    _blnAdmin = 0;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- Submitted UserID = "), _strUser);
    _arrValidCharacters.SetSize(0);
    _arrUserIDCharacters.SetSize(0);
    _arrUserIDCharacters = HSLExtensions::String::ConvertToCharArray(_strUser);
    _arrValidCharacters.AddAsLast(Translate("a"));
    _arrValidCharacters.AddAsLast(Translate("b"));
    _arrValidCharacters.AddAsLast(Translate("c"));
    _arrValidCharacters.AddAsLast(Translate("d"));
    _arrValidCharacters.AddAsLast(Translate("e"));
    _arrValidCharacters.AddAsLast(Translate("f"));
    _arrValidCharacters.AddAsLast(Translate("g"));
    _arrValidCharacters.AddAsLast(Translate("h"));
    _arrValidCharacters.AddAsLast(Translate("i"));
    _arrValidCharacters.AddAsLast(Translate("j"));
    _arrValidCharacters.AddAsLast(Translate("k"));
    _arrValidCharacters.AddAsLast(Translate("l"));
    _arrValidCharacters.AddAsLast(Translate("m"));
    _arrValidCharacters.AddAsLast(Translate("n"));
    _arrValidCharacters.AddAsLast(Translate("o"));
    _arrValidCharacters.AddAsLast(Translate("p"));
    _arrValidCharacters.AddAsLast(Translate("q"));
    _arrValidCharacters.AddAsLast(Translate("r"));
    _arrValidCharacters.AddAsLast(Translate("s"));
    _arrValidCharacters.AddAsLast(Translate("t"));
    _arrValidCharacters.AddAsLast(Translate("u"));
    _arrValidCharacters.AddAsLast(Translate("v"));
    _arrValidCharacters.AddAsLast(Translate("w"));
    _arrValidCharacters.AddAsLast(Translate("x"));
    _arrValidCharacters.AddAsLast(Translate("y"));
    _arrValidCharacters.AddAsLast(Translate("z"));
    _arrValidCharacters.AddAsLast(Translate("0"));
    _arrValidCharacters.AddAsLast(Translate("1"));
    _arrValidCharacters.AddAsLast(Translate("2"));
    _arrValidCharacters.AddAsLast(Translate("3"));
    _arrValidCharacters.AddAsLast(Translate("4"));
    _arrValidCharacters.AddAsLast(Translate("5"));
    _arrValidCharacters.AddAsLast(Translate("6"));
    _arrValidCharacters.AddAsLast(Translate("7"));
    _arrValidCharacters.AddAsLast(Translate("8"));
    _arrValidCharacters.AddAsLast(Translate("9"));
    _arrValidCharacters.AddAsLast(Translate("0"));
    _intNumberOfUserIDCharacters=_arrUserIDCharacters.GetSize();
    if (_intNumberOfUserIDCharacters >= 1)
    {
      {
        for(loopCounter1 = 0; loopCounter1 < _intNumberOfUserIDCharacters;)
        {
          loopCounter1 = loopCounter1 + 1;
          _intLookupReturn = LOOKUP::Lookup(_arrValidCharacters, _arrUserIDCharacters.ElementAt( loopCounter1 -1));
          if (_intLookupReturn == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- User ID is invalid"), Translate(""));
            return (0);
          }
        }
      }
    }
    else
    {
      return (0);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- User ID is valid"), Translate(""));
    return (1);
  }

  function CleaningDecision( variable _blnAdmin ) variable {
    private dialog dialogHandle_1;
    private variable _rtnSkipClean;
    private variable _strSQLStatement;
    private variable _hndAccessDB_User;
    private file _hndAccessDB;
    private variable _strConfigFolderPath;
    private variable _strCurrentTime;
    private variable _strDate;
    private variable _strCurrentDate;
    private variable _strCellCalcFilePath;
    private variable _strMethodsFolderPath;
    private variable _strBatFilePath;
    private variable _strCellCalc2FilePath;
    private file _hndCellCalc2;
    private file _hndCellCalc;
    private variable _fltDaysSinceLastClean;
    _rtnSkipClean = 0;
    if (_blnAdmin == 1)
    {
      dialogHandle_1.SetOutput(Translate("Do you want to skip the cleaning protocols?"));
      _rtnSkipClean = dialogHandle_1.ShowOutput(Translate("Skip Cleaning?"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
    }
    if (_rtnSkipClean == 6)
    {
      MECC::TraceComment(Translate("Admin skipped cleaning decision"));
      return (0);
    }
    else
    {
      _DefineDBFilePath();
      _strSQLStatement = StrConcat2(Translate("SELECT * FROM [HamiltonCleaning] ORDER BY [CleaningDate] DESC"), Translate(""));
      _hndAccessDB.AddField("User", _hndAccessDB_User, hslString, 255);
      _hndAccessDB.AddField("CleaningDate", _strDate, hslString, 8);
      if( 0 == _hndAccessDB.Open(_strAcessDBFilePath + " " + "HamiltonCleaning", hslRead, _strSQLStatement) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
      }
      if( 0 == _hndAccessDB.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != _hndAccessDB.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndAccessDB.RemoveFields();
      _strCurrentDate = TimGetFormattedDate(Translate("%d/%m/%Y "));
      _strCurrentTime = TimGetFormattedTime(Translate("%H:%M:%S"));
      _strCurrentDate = StrConcat2(_strCurrentDate, _strCurrentTime);
      _strCellCalcFilePath = StrConcat2(_strConfigFolderPath, Translate("\\CellCalc.csv"));
      _hndCellCalc.SetExtendedProperties( "HDR=NO");
      _hndCellCalc.AddField("CurrentDate", _strCurrentDate, hslString, 255);
      _hndCellCalc.AddField("Date", _strDate, hslString, 255);
      _hndCellCalc.SetDelimiter(hslCSVDelimited);
      if( 0 == _hndCellCalc.Open(_strCellCalcFilePath, hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strCellCalcFilePath, "HxMetEdCompCmd");
      }
      if( 0 == _hndCellCalc.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != _hndCellCalc.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndCellCalc.RemoveFields();
      _strMethodsFolderPath = FilGetMethodsPath();
      _strBatFilePath = StrConcat2(_strMethodsFolderPath, Translate("\\Sanger\\SGE\\CSVreader.bat"));
      {
        if( 0 == Shell(_strBatFilePath, hslShow, hslSynchronous) )
        {
              MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      _strCellCalc2FilePath = StrConcat2(_strConfigFolderPath, Translate("\\CellCalc2.csv"));
      _hndCellCalc2.AddField("CurrentDate", _fltDaysSinceLastClean, hslFloat);
      _hndCellCalc2.SetDelimiter(hslCSVDelimited);
      if( 0 == _hndCellCalc2.Open(_strCellCalc2FilePath, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strCellCalc2FilePath, "HxMetEdCompCmd");
      }
      if( 0 == _hndCellCalc2.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != _hndCellCalc2.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndCellCalc2.RemoveFields();
      _fltDaysSinceLastClean = MthRound(_fltDaysSinceLastClean, 2);
      StatusDisplay_Update(Translate("Days since last Clean: "), _fltDaysSinceLastClean);
      return (_fltDaysSinceLastClean);
    }
  }

  function StatusDisplay_Init(  ) variable {
    private variable _strMethodName;
    private variable _rtnAswStatusValue;
    _strMethodName = GetMethodName(1);
    _rtnAswStatusValue = AswStatusDialog::Initialize(_strMethodName);
    if (_rtnAswStatusValue == 0)
    {
      return (0);
    }
    else
    {
      return (1);
    }
  }

  function StatusDisplay_Update( variable _strMessage1, variable _strMessage2 ) variable {
    private variable _strTime;
    private variable _rtnAswStatusValue;
    private variable _strMessage;
    _strTime = TimGetFormattedTime(Translate("%H:%M"));
    _strMessage = StrConcat4(_strTime, Translate("\t"), _strMessage1, _strMessage2);
    if(0){
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- AswStatusDialog Update = "), _strMessage);
    }
    _rtnAswStatusValue = AswStatusDialog::AppendText(_strMessage);
    if (_rtnAswStatusValue == 0)
    {
      return (0);
    }
    else
    {
      return (1);
    }
  }

  function DoorLock( device & ML_STAR, variable _blnSim, variable _blnLock ) void {
    private dialog dialogHandle_2;
    private variable _loopCounter1;
    if (_blnSim == 0)
    {
      if (_blnLock == 1)
      {
        {
          _loopCounter1 = 0;
          while (1 == 1)
          {
            _loopCounter1 = _loopCounter1 + 1;
            onerror goto errLabel_3 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_3 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_2.SetOutput(Translate("The next step cannot be performed as the Hamilton cover is open. \n"), Translate("Please close the cover and hit 'OK' to continue."));
              dialogHandle_2.ShowOutput(Translate("Error: Cover Open"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Hamilton covers: "), Translate("Locked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Locked"));
      }
      else
      {
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Hamilton covers: "), Translate("Unlocked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Unlocked"));
      }
    }
    else
    {
      if (_blnLock == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Sim - Hamilton covers: "), Translate("Locked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Locked"));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Sim - Hamilton covers: "), Translate("Unlocked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Unlocked"));
      }
    }
  }

  function TipCheck( sequence & _seqTips, variable _strTipCounter, variable _intTipsNeeded ) variable {
    private variable _intMaxNumberOfTips;
    private variable _hndTipCounter_Value;
    private variable _hndTipCounter_TipCounter;
    private file _hndTipCounter;
    private variable _loopCounter1;
    private variable _arrTipCounterName[];
    private variable _arrTipCounterValue[];
    private variable _intTipCounterValue;
    private variable _rtnLookup;
    private variable _intNumberOfOnDeckTips;
    private variable _blnReturnValue;
    SeqResetSequenceIndexes(_seqTips);
    _intMaxNumberOfTips = _seqTips.GetCount();
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### intMaxNumberOfTips = "), _intMaxNumberOfTips);
    _arrTipCounterName.SetSize(0);
    _arrTipCounterValue.SetSize(0);
    _DefineDBFilePath();
    _hndTipCounter.AddField("TipCounter", _hndTipCounter_TipCounter, hslString, 255);
    _hndTipCounter.AddField("Value", _hndTipCounter_Value, hslInteger);
    if( 0 == _hndTipCounter.Open(_strAcessDBFilePath + " " + "TipCounter", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
    }
    {
      _loopCounter1 = 0;
      while (
         (_hndTipCounter.Eof() == 0)
      )
      {
        _loopCounter1 = _loopCounter1 + 1;
        if( 0 == _hndTipCounter.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _arrTipCounterName.AddAsLast(_hndTipCounter_TipCounter);
        _arrTipCounterValue.AddAsLast(_hndTipCounter_Value);
      }
    }
    if( 0 != _hndTipCounter.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndTipCounter.RemoveFields();
    _rtnLookup = LOOKUP::Lookup(_arrTipCounterName, _strTipCounter);
    if (_rtnLookup != 0)
    {
      _intTipCounterValue=_arrTipCounterValue.GetAt(_rtnLookup-1);
    }
    else
    {
      _intTipCounterValue = 1;
      _hndTipCounter.AddField("TipCounter", _strTipCounter, hslString, 255);
      _hndTipCounter.AddField("Value", _intTipCounterValue, hslInteger);
      if( 0 == _hndTipCounter.Open(_strAcessDBFilePath + " " + "TipCounter", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
      }
      if( 0 == _hndTipCounter.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != _hndTipCounter.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndTipCounter.RemoveFields();
    }
    _seqTips.SetCurrentPosition(_intTipCounterValue);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### Current tip position = "), _intTipCounterValue);
    _intNumberOfOnDeckTips = 0;
    _intNumberOfOnDeckTips = _intMaxNumberOfTips - _intTipCounterValue + 1;
    Trace("##### Number of tips on deck = ", _intNumberOfOnDeckTips);
    if (_intTipsNeeded > _intMaxNumberOfTips)
    {
      MECC::TraceComment(Translate("Tip requirement for this process exceeds deck capacity. Method Abort"));
      abort;
    }
    else
    {
      if (_intTipsNeeded > _intNumberOfOnDeckTips)
      {
        MECC::TraceComment(Translate("Tip requirement for this process exceeds current on-deck deck capacity. Tip reload required"));
        _blnReturnValue = 1;
      }
      else
      {
        MECC::TraceComment(Translate("Tip requirement for this process does not exceed current on-deck deck capacity. No tip reload required."));
        _blnReturnValue = 0;
      }
    }
    return (_blnReturnValue);
  }

  private function _DefineDBFilePath(  ) void {
    _strConfigFolderPath = FilGetConfigPath();
    _strAcessDBFilePath = StrConcat2(_strConfigFolderPath, Translate("\\CellCultureTracking.mdb"));
  }

  function UserCheck( variable & _strUserPrefix, variable & _blnAdvanced ) void {
    private dialog customDialog_4;
    private variable _hndAccessDB_AdvancedUser;
    private variable _hndAccessDB_UserPrefix;
    private variable _hndAccessDB_Email;
    private variable _loopCounter1;
    private variable _hndAccessDB_DateLastUsed;
    private variable _intIndex;
    private variable _hndAccessDB_PreferredName;
    private variable _strUserDisplay;
    private file _hndAccessDB;
    private variable _arrUsersPreferred[];
    private variable _arrUserLastDate[];
    private variable _arrUserPrefix[];
    private variable _arrCustomDialogDisplays[];
    private variable _arrUserEmail[];
    private variable _arrUserAdvanced[];
    private variable _rtnValue;
    private variable _intNumberOfCustomDialogOptions;
    private variable _strDateUserLastRun;
    private variable _strUserPreferredName;
    private variable _strUserEmail;
    private dialog customDialog_5;
    private variable _strCurrentDate;
    private variable _loopCounter3;
    private variable _blnAdvancedUser;
    private variable _strPassword;
    private variable _blnVisible;
    private variable _blnEnabled;
    _strUserPrefix = 0;
    _blnAdvanced = 0;
    StatusDisplay_Update(Translate("Identifying User"), Translate(""));
    _arrUserPrefix.SetSize(0);
    _arrUsersPreferred.SetSize(0);
    _arrUserAdvanced.SetSize(0);
    _arrUserEmail.SetSize(0);
    _arrUserLastDate.SetSize(0);
    _arrCustomDialogDisplays.SetSize(0);
    _DefineDBFilePath();
    _hndAccessDB.AddField("UserPrefix", _hndAccessDB_UserPrefix, hslString, 255);
    _hndAccessDB.AddField("PreferredName", _hndAccessDB_PreferredName, hslString, 255);
    _hndAccessDB.AddField("AdvancedUser", _hndAccessDB_AdvancedUser, hslInteger);
    _hndAccessDB.AddField("Email", _hndAccessDB_Email, hslString, 255);
    _hndAccessDB.AddField("DateLastUsed", _hndAccessDB_DateLastUsed, hslString, 8);
    if( 0 == _hndAccessDB.Open(_strAcessDBFilePath + " " + "Users", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
    }
    {
      _loopCounter1 = 0;
      while (
         (_hndAccessDB.Eof() == 0)
      )
      {
        _loopCounter1 = _loopCounter1 + 1;
        if( 0 == _hndAccessDB.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        StrMakeLower(_hndAccessDB_UserPrefix);
        _arrUserPrefix.AddAsLast(_hndAccessDB_UserPrefix);
        _arrUsersPreferred.AddAsLast(_hndAccessDB_PreferredName);
        if (_hndAccessDB_AdvancedUser == -1)
        {
          _hndAccessDB_AdvancedUser = 1;
        }
        _arrUserAdvanced.AddAsLast(_hndAccessDB_AdvancedUser);
        _arrUserEmail.AddAsLast(_hndAccessDB_Email);
        _arrUserLastDate.AddAsLast(_hndAccessDB_DateLastUsed);
        _strUserDisplay = StrConcat4(_hndAccessDB_PreferredName, Translate(" ("), _hndAccessDB_UserPrefix, Translate(")"));
        _arrCustomDialogDisplays.AddAsLast(_strUserDisplay);
      }
    }
    if( 0 != _hndAccessDB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndAccessDB.RemoveFields();
    _arrCustomDialogDisplays.AddAsLast(Translate("Other"));
    _intNumberOfCustomDialogOptions=_arrCustomDialogDisplays.GetSize();
    _intIndex = LOOKUP::Lookup(_arrUserPrefix, Translate("ch33"));
    _blnEnabled = 1;
    customDialog_4.InitCustomDialog("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");
    customDialog_4.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", _arrCustomDialogDisplays );
    customDialog_4.SetCustomDialogProperty( "button1.IsEnabled", _blnEnabled );
    customDialog_4.SetCustomDialogProperty( "comboBox1.SelectedIndex", _intIndex );
    customDialog_4.ShowCustomDialog();
    _rtnValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    _intIndex = customDialog_4.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
    if (_rtnValue == 2)
    {
      abort;
    }
    if (_intIndex == _intNumberOfCustomDialogOptions)
    {
      MECC::TraceComment(Translate("Unknown User\nInclude an option to add new users"));
      _strUserPreferredName = Translate("");
      _strUserPrefix = Translate("");
      {
        _loopCounter3 = 0;
        while (1 == 1)
        {
          _loopCounter3 = _loopCounter3 + 1;
          customDialog_5.InitCustomDialog("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");
          customDialog_5.SetCustomDialogProperty( "textBox1.Text", _strUserPrefix );
          customDialog_5.SetCustomDialogProperty( "textBox2.Text", _strUserPreferredName );
          customDialog_5.SetCustomDialogProperty( "textBlock5.IsVisible", _blnVisible );
          customDialog_5.SetCustomDialogProperty( "button3.IsEnabled", _blnVisible );
          customDialog_5.SetCustomDialogProperty( "button3.IsVisible", _blnVisible );
          customDialog_5.ShowCustomDialog();
          _rtnValue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
          _strUserPrefix = customDialog_5.GetCustomDialogProperty( "textBox1.Text" );
          _strUserPreferredName = customDialog_5.GetCustomDialogProperty( "textBox2.Text" );
          _strPassword = customDialog_5.GetCustomDialogProperty( "textBox3.Text" );
          _blnVisible = 1;
          StrMakeLower(_strUserPrefix);
          _strUserEmail = StrConcat2(_strUserPrefix, Translate("@sanger.ac.uk"));
          if (_rtnValue == 2)
          {
            abort;
          }
          if (_rtnValue == 6)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// User Identified: "), _strUserPrefix);
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// User email: "), _strUserEmail);
            break;
          }
          if (_strPassword == "Winter05")
          {
            MECC::TraceComment(Translate("***** Adding User to Database *****"));
            _strCurrentDate = TimGetFormattedDate(Translate("%d/%m/%Y "));
            _blnAdvancedUser = 0;
            _hndAccessDB.AddField("UserPrefix", _strUserPrefix, hslString, 255);
            _hndAccessDB.AddField("PreferredName", _strUserPreferredName, hslString, 255);
            _hndAccessDB.AddField("AdvancedUser", _blnAdvancedUser, hslInteger);
            _hndAccessDB.AddField("Email", _strUserEmail, hslString, 255);
            _hndAccessDB.AddField("DateLastUsed", _strCurrentDate, hslString, 8);
            if( 0 == _hndAccessDB.Open(_strAcessDBFilePath + " " + "Users", hslAppend) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
            }
            if( 0 == _hndAccessDB.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 != _hndAccessDB.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            _hndAccessDB.RemoveFields();
            break;
          }
          else
          {
          }
        }
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// User Identified: "), _strUserPrefix);
    }
    else
    {
      MECC::TraceComment(Translate("---------- User Successfully Identified ----------"));
      _strUserPrefix=_arrUserPrefix.GetAt(_intIndex-1);
      _strUserPreferredName=_arrUsersPreferred.GetAt(_intIndex-1);
      _blnAdvanced=_arrUserAdvanced.GetAt(_intIndex-1);
      _strUserEmail=_arrUserEmail.GetAt(_intIndex-1);
      _strDateUserLastRun=_arrUserLastDate.GetAt(_intIndex-1);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### User Identified: "), _strUserPreferredName);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### User email: "), _strUserEmail);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### User's last run date: "), _strDateUserLastRun);
      StatusDisplay_Update(Translate("User Identified: "), _strUserPreferredName);
      if (_blnAdvanced == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### User Admin: "), Translate("True"));
        StatusDisplay_Update(Translate("Admin Access Granted"), Translate(""));
      }
    }
  }

  function TipPickup( device & ML_STAR, variable _strChannelPattern, sequence & _seqTip, variable _strTipCounter ) void {
    private variable _intTipCounterValue;
    private variable _hndTipCounter_Value;
    private variable _rtnLookup;
    private variable _loopCounter1;
    private variable _hndTipCounter_TipCounter;
    private file _hndTipCounter;
    private variable _arrTipCounterName[];
    private variable _arrTipCounterValue[];
    private variable _blnTipType;
    private variable _strSQLStatement;
    private variable _intTipsUsed;
    private variable _intNewTipValue;
    private variable _intTipEndPosition;
    private variable _intMaxTipNumber;
    private variable _intLoopCount;
    private variable _arrChannelPatternString[];
    private variable _strTipType;
    private variable _strLabwareID;
    private variable _strPositionID;
    MECC::TraceComment(Translate("----------------------------------------\n               Tip Pickup\n----------------------------------------"));
    _intTipsUsed = 0;
    _arrChannelPatternString.SetSize(0);
    _arrChannelPatternString = HSLExtensions::String::ConvertToCharArray(_strChannelPattern);
    _intLoopCount=_arrChannelPatternString.GetSize();
    {
      for(_loopCounter1 = 0; _loopCounter1 < _intLoopCount;)
      {
        _loopCounter1 = _loopCounter1 + 1;
        if (_arrChannelPatternString.ElementAt( _loopCounter1 -1) == "1")
        {
          _intTipsUsed = _intTipsUsed + 1;
        }
      }
    }
    _strLabwareID = SeqGetLabwareId(_seqTip);
    _strPositionID = SeqGetPositionId(_seqTip);
    _strTipType = DevGetLabwareData(ML_STAR, _strLabwareID, Translate("MlStarTipRack"));
    _blnTipType = 0;
    if (_strTipType == "")
    {
      _strTipType = DevGetLabwareData(ML_STAR, _strLabwareID, Translate("MlStarXLTipRack"));
      _blnTipType = 1;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### _strLabwareID = "), _strLabwareID);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### _strPositionID = "), _strPositionID);
    _arrTipCounterName.SetSize(0);
    _arrTipCounterValue.SetSize(0);
    _DefineDBFilePath();
    _hndTipCounter.AddField("TipCounter", _hndTipCounter_TipCounter, hslString, 255);
    _hndTipCounter.AddField("Value", _hndTipCounter_Value, hslInteger);
    if( 0 == _hndTipCounter.Open(_strAcessDBFilePath + " " + "TipCounter", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
    }
    {
      _loopCounter1 = 0;
      while (
         (_hndTipCounter.Eof() == 0)
      )
      {
        _loopCounter1 = _loopCounter1 + 1;
        if( 0 == _hndTipCounter.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _arrTipCounterName.AddAsLast(_hndTipCounter_TipCounter);
        _arrTipCounterValue.AddAsLast(_hndTipCounter_Value);
      }
    }
    if( 0 != _hndTipCounter.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndTipCounter.RemoveFields();
    _rtnLookup = LOOKUP::Lookup(_arrTipCounterName, _strTipCounter);
    if (_rtnLookup != 0)
    {
      _intTipCounterValue=_arrTipCounterValue.GetAt(_rtnLookup-1);
    }
    else
    {
      _intTipCounterValue = 1;
      _hndTipCounter.AddField("TipCounter", _strTipCounter, hslString, 255);
      _hndTipCounter.AddField("Value", _intTipCounterValue, hslInteger);
      if( 0 == _hndTipCounter.Open(_strAcessDBFilePath + " " + "TipCounter", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
      }
      if( 0 == _hndTipCounter.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != _hndTipCounter.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndTipCounter.RemoveFields();
    }
    _seqTip.SetCurrentPosition(_intTipCounterValue);
    _intMaxTipNumber = _seqTip.GetCount();
    _intTipEndPosition = _intTipCounterValue + _intTipsUsed;
    if (_intMaxTipNumber < _intTipEndPosition)
    {
      MECC::TraceComment(Translate("----- Reload tips -----"));
      ReloadTips(ML_STAR, _seqTip, _strTipCounter);
      _intTipCounterValue = 1;
    }
    if (_blnTipType == 0)
    {
      if(0){
        StatusDisplay_Update(Translate(" - 1 mL "), Translate("Tip Pickup"));
      }
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    }
    else
    {
      if(0){
        StatusDisplay_Update(Translate(" - 5 mL "), Translate("Tip Pickup"));
      }
      ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
    }
    _intNewTipValue = _intTipCounterValue + _intTipsUsed;
    _strSQLStatement = StrConcat8(Translate("UPDATE [TipCounter] SET [Value] = "), _intNewTipValue, Translate(" WHERE [TipCounter] = '"), _strTipCounter, Translate("'"), Translate(""), Translate(""), Translate(""));
    _hndTipCounter.AddField("TipCounter", _hndTipCounter_TipCounter, hslString, 255);
    _hndTipCounter.AddField("Value", _hndTipCounter_Value, hslInteger);
    if( 0 == _hndTipCounter.Open(_strAcessDBFilePath + " " + "TipCounter", hslAppend, _strSQLStatement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
    }
    if( 0 != _hndTipCounter.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndTipCounter.RemoveFields();
  }

  function ReloadTips( device & ML_STAR, sequence & _seqTip, variable _strTipCounter ) void {
    private variable _strSQLStatement;
    private variable _hndTipCounter_Value;
    private variable _hndTipCounter_TipCounter;
    private file _hndTipCounter;
    private variable _blnSim;
    _blnSim = HSLML_STAR::IsSimulatorMode(ML_STAR);
    DoorLock(ML_STAR, _blnSim, 0);
    _DefineDBFilePath();
    _strSQLStatement = StrConcat8(Translate("UPDATE [TipCounter] SET [Value] = "), 1, Translate(" WHERE [TipCounter] = '"), _strTipCounter, Translate("'"), Translate(""), Translate(""), Translate(""));
    _hndTipCounter.AddField("TipCounter", _hndTipCounter_TipCounter, hslString, 255);
    _hndTipCounter.AddField("Value", _hndTipCounter_Value, hslInteger);
    if( 0 == _hndTipCounter.Open(_strAcessDBFilePath + " " + "TipCounter", hslAppend, _strSQLStatement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
    }
    if( 0 != _hndTipCounter.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndTipCounter.RemoveFields();
    _seqTip.SetCurrentPosition(1);
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, _seqTip, Translate("Please reload the tips"));
    DoorLock(ML_STAR, _blnSim, 1);
  }

  function VolumePlausibilityCheck( variable _intVolumeToTransfer, variable _strLC ) void {
    private variable _intTipType;
    private variable _intVolumeMin;
    private variable _intVolumeMax;
    if(0){
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> _strLC = "), _strLC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> _intVolumeToTransfer = "), _intVolumeToTransfer);
    }
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(_strLC);
    _intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    if (_intTipType == 5)
    {
      _intVolumeMax = 1000;
      _intVolumeMin = 15;
    }
    if (_intTipType == 29)
    {
      _intVolumeMax = 4000;
      _intVolumeMin = 100;
    }
    if (_intVolumeToTransfer <= _intVolumeMax)
    {
      if (_intVolumeToTransfer >= _intVolumeMin)
      {
      }
      else
      {
        MECC::TraceComment(Translate("Volume too low"));
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("Volume too great"));
      abort;
    }
  }

  function FourWellHandling( sequence & _seq, variable _strCP, variable _intWellCount ) variable {
    private variable _intStrLength;
    private variable _strLabwareID;
    private variable _intFour;
    private variable intFour;
    private variable _intSeqIncrement;
    private variable _loopCounter1;
    private variable _intArraySize;
    private variable _intCount;
    private variable _arrCP[];
    _strLabwareID = SeqGetLabwareId(_seq);
    _strLabwareID = StrMakeLower(_strLabwareID);
    _intFour = StrFind(_strLabwareID, Translate("four"));
    if (_intFour < 0)
    {
      return (Translate(""));
    }
    _arrCP.SetSize(0);
    _arrCP = HSLExtensions::String::ConvertToCharArray(_strCP);
    _intArraySize=_arrCP.GetSize();
    _intCount = 0;
    {
      for(_loopCounter1 = 0; _loopCounter1 < _intArraySize;)
      {
        _loopCounter1 = _loopCounter1 + 1;
        if (_arrCP.ElementAt( _loopCounter1 -1) == "1")
        {
          _intCount = _intCount + 1;
        }
      }
    }
    _intSeqIncrement = _intWellCount - _intCount;
    SeqIncrement(_seq, _intSeqIncrement);
  }

  function WorklistEntryValidation( variable varEntry, variable blnRemoveSpaces ) variable {
    private variable strVarEntry_Type;
    private variable blnError;
    private variable strReturn;
    if(0){
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### varEntry = "), varEntry);
    }
    blnError = Translate("False");
    strVarEntry_Type = StrGetType(varEntry);
    if (strVarEntry_Type == "")
    {
      blnError = Translate("True");
    }
    if (strVarEntry_Type == "s")
    {
      if (varEntry == "")
      {
        blnError = Translate("True");
      }
    }
    if (blnError != "False")
    {
      abort;
    }
    if (blnRemoveSpaces == 1)
    {
      strReturn = StrMakeLowerCopy(varEntry);
      StrReplace(strReturn, Translate(" "), Translate(""));
      if(0){
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### strReturn = "), strReturn);
      }
      return (strReturn);
    }
    else
    {
      if(0){
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### varEntry = "), varEntry);
      }
      return (varEntry);
    }
  }
} // library namespace
