#pragma once
#include "Hamilton HSLCap\\HSLCap.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace SCAP_STARPLUS {
  variable _devScap1;
  variable _devScap2;
  function Connect( variable i_intComport1, variable i_intComport2, variable i_blnTraceLevel, variable i_blnSimMode ) void ;
  function Disconnect(  ) void ;
  function GetDoorState( variable & o_blnDoorState1, variable & o_blnDoorState2 ) void ;
  function GetFanSpeed( variable & o_intFanSpeed1, variable & o_intFanSpeed2 ) void ;
  function GetFanState( variable & o_intFanState1, variable & o_intFanState2 ) void ;
  function GetHepaFilterStatus( variable & o_strHepaFilterStatus1, variable & o_strHepaFilterStatus2 ) void ;
  function GetHumidity( variable & o_fltHumidity1, variable & o_fltHumidity2 ) void ;
  function GetLightState( variable & o_intLightState1, variable & o_intLightState2 ) void ;
  function GetPrefilterStatus( variable & o_strPrefilterStatus1, variable & o_strPrefilterStatus2 ) void ;
  function GetTemperature( variable & o_strTemp1, variable & o_strTemp2 ) void ;
  function SetFanSpeed( variable i_intFanSpeed ) void ;
  function SetFanState( variable i_blnFanState ) void ;
  function SetLightState( variable i_blnLightState ) void ;
  private function _Error( variable _intErrorCode ) void ;
  private function z_Abstract(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Connect( variable i_intComport1, variable i_intComport2, variable i_blnTraceLevel, variable i_blnSimMode ) void {
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::Connect -- Start <<<<<"));
    if (i_blnTraceLevel == 1)
    {
      HSLCap::SetTraceLevel(HSLCap::TRACE_LEVEL_DEBUG);
    }
    else
    {
      HSLCap::SetTraceLevel(HSLCap::TRACE_LEVEL_RELEASE);
    }
    if (i_blnSimMode == 1)
    {
      _rtnCode = HSLCap::OverrideSimulation(HSLCap::_TRUE);
    }
    else
    {
      _rtnCode = HSLCap::OverrideSimulation(HSLCap::_FALSE);
    }
    _Error(_rtnCode);
    _rtnCode = HSLCap::Connect(i_intComport1, _devScap1);
    _Error(_rtnCode);
    _rtnCode = HSLCap::Connect(i_intComport2, _devScap2);
    _Error(_rtnCode);
    MECC::TraceComment(Translate(">>>>> HSLCap::Connect -- Complete <<<<<"));
  }

  function Disconnect(  ) void {
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::Disconnect -- Start <<<<<"));
    _rtnCode = HSLCap::Disconnect(_devScap1);
    _Error(_rtnCode);
    _rtnCode = HSLCap::Disconnect(_devScap2);
    _Error(_rtnCode);
    MECC::TraceComment(Translate(">>>>> HSLCap::Disconnect -- Complete <<<<<"));
  }

  function GetDoorState( variable & o_blnDoorState1, variable & o_blnDoorState2 ) void {
    private variable _rtnCode;
    o_blnDoorState1 = 0;
    o_blnDoorState2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetDoorState -- Start <<<<<"));
    _rtnCode = HSLCap::GetDoorState(_devScap1, o_blnDoorState1);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Left - Door State = "), o_blnDoorState1);
    _rtnCode = HSLCap::GetDoorState(_devScap2, o_blnDoorState2);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Right - Door State = "), o_blnDoorState2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetDoorState -- Complete <<<<<"));
  }

  private function _Error( variable _intErrorCode ) void {
    private variable _rtnCode;
    private variable _strErrorMessage;
    if (_rtnCode != 0)
    {
      MECC::TraceComment(Translate("//////////////// SCAP_STARplus.smt encountered an error"));
      TrcTrace(Translate("----- _rtnCode = "), _rtnCode);
      HSLCap::GetLastErrorMessage(_devScap1, _strErrorMessage);
      TrcTrace(Translate("----- SCAP_1 Error Message = "), _strErrorMessage);
      HSLCap::GetLastErrorMessage(_devScap2, _strErrorMessage);
      TrcTrace(Translate("----- SCAP_1 Error Message = "), _strErrorMessage);
      abort;
    }
  }

  function GetFanSpeed( variable & o_intFanSpeed1, variable & o_intFanSpeed2 ) void {
    private variable _rtnCode;
    o_intFanSpeed1 = 0;
    o_intFanSpeed2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanSpeed -- Start <<<<<"));
    _rtnCode = HSLCap::GetFanSpeed(_devScap1, o_intFanSpeed1);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Left - Fan Speed = "), o_intFanSpeed1);
    _rtnCode = HSLCap::GetFanSpeed(_devScap2, o_intFanSpeed2);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Right - Fan Speed = "), o_intFanSpeed2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanSpeed -- Complete <<<<<"));
  }

  function GetFanState( variable & o_intFanState1, variable & o_intFanState2 ) void {
    private variable _rtnCode;
    o_intFanState1 = 0;
    o_intFanState2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanState -- Start <<<<<"));
    _rtnCode = HSLCap::GetFanState(_devScap1, o_intFanState1);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Left - Fan State = "), o_intFanState1);
    _rtnCode = HSLCap::GetFanState(_devScap2, o_intFanState2);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Right - Fan State = "), o_intFanState2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanState -- Complete <<<<<"));
  }

  function GetHepaFilterStatus( variable & o_strHepaFilterStatus1, variable & o_strHepaFilterStatus2 ) void {
    private variable _rtnCode;
    o_strHepaFilterStatus1 = 0;
    o_strHepaFilterStatus2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetHepaFilterStatus -- Start <<<<<"));
    _rtnCode = HSLCap::GetHepaFilterStatus(_devScap1, o_strHepaFilterStatus1);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Left - HEPA Filter Status = "), o_strHepaFilterStatus2);
    _rtnCode = HSLCap::GetHepaFilterStatus(_devScap2, o_strHepaFilterStatus2);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Right - HEPA Filter Status = "), o_strHepaFilterStatus2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetHepaFilterStatus  -- Complete <<<<<"));
  }

  function GetHumidity( variable & o_fltHumidity1, variable & o_fltHumidity2 ) void {
    private variable _rtnCode;
    o_fltHumidity1 = 0;
    o_fltHumidity2 = 0;
    _rtnCode = HSLCap::GetHumidity(_devScap1, o_fltHumidity1);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Left - Humidity = "), o_fltHumidity1);
    _rtnCode = HSLCap::GetHumidity(_devScap2, o_fltHumidity2);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Right - Humidity = "), o_fltHumidity2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetHumidity -- Complete <<<<<"));
  }

  function GetLightState( variable & o_intLightState1, variable & o_intLightState2 ) void {
    private variable _rtnCode;
    o_intLightState1 = 0;
    o_intLightState2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetLightState -- Start <<<<<"));
    _rtnCode = HSLCap::GetLightState(_devScap1, o_intLightState1);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Left - Light State = "), o_intLightState1);
    _rtnCode = HSLCap::GetLightState(_devScap2, o_intLightState2);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Right - Light State = "), o_intLightState2);
  }

  function GetPrefilterStatus( variable & o_strPrefilterStatus1, variable & o_strPrefilterStatus2 ) void {
    private variable _rtnCode;
    o_strPrefilterStatus1 = 0;
    o_strPrefilterStatus2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetPrefilterStatus -- Start <<<<<"));
    _rtnCode = HSLCap::GetPrefilterStatus(_devScap1, o_strPrefilterStatus1);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Left - Prefilter Status = "), o_strPrefilterStatus1);
    _rtnCode = HSLCap::GetPrefilterStatus(_devScap2, o_strPrefilterStatus2);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Right - Prefilter Status = "), o_strPrefilterStatus2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetPrefilterStatus -- Complete <<<<<"));
  }

  function GetTemperature( variable & o_strTemp1, variable & o_strTemp2 ) void {
    private variable _rtnCode;
    o_strTemp1 = 0;
    o_strTemp2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetTemperature -- Start <<<<<"));
    _rtnCode = HSLCap::GetTemperature(_devScap1, o_strTemp1);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Left - Temperature = "), o_strTemp1);
    _rtnCode = HSLCap::GetTemperature(_devScap2, o_strTemp2);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Right - Temperature = "), o_strTemp2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetTemperature -- Complete <<<<<"));
  }

  function SetFanSpeed( variable i_intFanSpeed ) void {
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::SetFanSpeed -- Start <<<<<"));
    _rtnCode = HSLCap::SetFanSpeed(_devScap1, i_intFanSpeed);
    _Error(_rtnCode);
    _rtnCode = HSLCap::SetFanSpeed(_devScap2, i_intFanSpeed);
    _Error(_rtnCode);
    MECC::TraceComment(Translate(">>>>> HSLCap::SetFanSpeed -- Complete <<<<<"));
  }

  function SetFanState( variable i_blnFanState ) void {
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::SetFanState -- Start <<<<<"));
    _rtnCode = HSLCap::SetFanState(_devScap1, i_blnFanState);
    _Error(_rtnCode);
    _rtnCode = HSLCap::SetFanState(_devScap2, i_blnFanState);
    _Error(_rtnCode);
    MECC::TraceComment(Translate(">>>>> HSLCap::SetFanState -- Complete <<<<<"));
  }

  function SetLightState( variable i_blnLightState ) void {
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::SetLightState -- Start <<<<<"));
    _rtnCode = HSLCap::SetLightState(_devScap1, i_blnLightState);
    _Error(_rtnCode);
    _rtnCode = HSLCap::SetLightState(_devScap2, i_blnLightState);
    _Error(_rtnCode);
    MECC::TraceComment(Translate(">>>>> HSLCap::SetLightState -- Complete <<<<<"));
  }

  private function z_Abstract(  ) void {
  }
} // library namespace
