#pragma once
#include "HSLStrLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLFilLib.hsl"
#include "HSLTimLib.hsl"
#include "WSI\\AswStatusDialog_WSI.hsl"
#include "WSI\\HSLGetSerialNumber_WSI.hsl"
#include "HSLMthLib.hsl"
#include "HSLExtensions\\String.hsl"
#include "HSLUtilLib2.hsl"
#include "lookup.hs_"
#include "HSLSeqLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace SANGERGENERAL {
  variable _strAcessDBFilePath;
  variable _strConfigFolderPath;
  function AdminDetect( variable _strUser, variable & _blnAdmin ) variable ;
  function CleaningDecision( variable _blnAdmin ) variable ;
  function DoorLock( device & ML_STAR, variable _blnSim, variable _blnLock ) void ;
  function StatusDisplay_Init(  ) void ;
  function StatusDisplay_Update( variable _strMessage1, variable _strMessage2 ) void ;
  function TipCheck( sequence & _seqTips, variable _strTipCounter, variable _intTipsNeeded ) variable ;
  private function _DefineDBFilePath(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOOKUP::_InitLibrary();
  }
  function _ExitLibrary() {
    LOOKUP::_ExitLibrary();
  }

  function AdminDetect( variable _strUser, variable & _blnAdmin ) variable {
    private variable _arrValidCharacters[];
    private variable _arrUserIDCharacters[];
    private variable _intNumberOfUserIDCharacters;
    private variable loopCounter1;
    private variable _intLookupReturn;
    private variable strGreeting("Welcome home sir");
    _blnAdmin = 0;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- Submitted UserID = "), _strUser);
    StrReplace(_strUser, Translate("@sanger.ac.uk"), Translate(""));
    if(_strUser == "ch33")
    {
         _blnAdmin = 1;
         Trace();
         Trace(strGreeting);
         Trace();
    }
    if(_strUser == "1")
    {_blnAdmin = 1;}
    _arrValidCharacters.SetSize(0);
    _arrUserIDCharacters.SetSize(0);
    _arrUserIDCharacters = HSLExtensions::String::ConvertToCharArray(_strUser);
    _arrValidCharacters.AddAsLast(Translate("a"));
    _arrValidCharacters.AddAsLast(Translate("b"));
    _arrValidCharacters.AddAsLast(Translate("c"));
    _arrValidCharacters.AddAsLast(Translate("d"));
    _arrValidCharacters.AddAsLast(Translate("e"));
    _arrValidCharacters.AddAsLast(Translate("f"));
    _arrValidCharacters.AddAsLast(Translate("g"));
    _arrValidCharacters.AddAsLast(Translate("h"));
    _arrValidCharacters.AddAsLast(Translate("i"));
    _arrValidCharacters.AddAsLast(Translate("j"));
    _arrValidCharacters.AddAsLast(Translate("k"));
    _arrValidCharacters.AddAsLast(Translate("l"));
    _arrValidCharacters.AddAsLast(Translate("m"));
    _arrValidCharacters.AddAsLast(Translate("n"));
    _arrValidCharacters.AddAsLast(Translate("o"));
    _arrValidCharacters.AddAsLast(Translate("p"));
    _arrValidCharacters.AddAsLast(Translate("q"));
    _arrValidCharacters.AddAsLast(Translate("r"));
    _arrValidCharacters.AddAsLast(Translate("s"));
    _arrValidCharacters.AddAsLast(Translate("t"));
    _arrValidCharacters.AddAsLast(Translate("u"));
    _arrValidCharacters.AddAsLast(Translate("v"));
    _arrValidCharacters.AddAsLast(Translate("w"));
    _arrValidCharacters.AddAsLast(Translate("x"));
    _arrValidCharacters.AddAsLast(Translate("y"));
    _arrValidCharacters.AddAsLast(Translate("z"));
    _arrValidCharacters.AddAsLast(Translate("0"));
    _arrValidCharacters.AddAsLast(Translate("1"));
    _arrValidCharacters.AddAsLast(Translate("2"));
    _arrValidCharacters.AddAsLast(Translate("3"));
    _arrValidCharacters.AddAsLast(Translate("4"));
    _arrValidCharacters.AddAsLast(Translate("5"));
    _arrValidCharacters.AddAsLast(Translate("6"));
    _arrValidCharacters.AddAsLast(Translate("7"));
    _arrValidCharacters.AddAsLast(Translate("8"));
    _arrValidCharacters.AddAsLast(Translate("9"));
    _arrValidCharacters.AddAsLast(Translate("0"));
    _intNumberOfUserIDCharacters=_arrUserIDCharacters.GetSize();
    if (_intNumberOfUserIDCharacters >= 1)
    {
      {
        for(loopCounter1 = 0; loopCounter1 < _intNumberOfUserIDCharacters;)
        {
          loopCounter1 = loopCounter1 + 1;
          _intLookupReturn = LOOKUP::Lookup(_arrValidCharacters, _arrUserIDCharacters.ElementAt( loopCounter1 -1));
          if (_intLookupReturn == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- User ID is invalid"), Translate(""));
            return (0);
          }
        }
      }
    }
    else
    {
      return (0);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- User ID is valid"), Translate(""));
    return (1);
  }

  function CleaningDecision( variable _blnAdmin ) variable {
    private dialog dialogHandle_1;
    private variable _rtnSkipClean;
    private variable _strSQLStatement;
    private variable _hndAccessDB_User;
    private file _hndAccessDB;
    private variable _strConfigFolderPath;
    private variable _strCurrentTime;
    private variable _strDate;
    private variable _strCurrentDate;
    private variable _strCellCalcFilePath;
    private variable _strMethodsFolderPath;
    private variable _strBatFilePath;
    private variable _strCellCalc2FilePath;
    private file _hndCellCalc2;
    private file _hndCellCalc;
    private variable _fltDaysSinceLastClean;
    _rtnSkipClean = 0;
    if (_blnAdmin == 1)
    {
      dialogHandle_1.SetOutput(Translate("Do you want to skip the cleaning protocols?"));
      _rtnSkipClean = dialogHandle_1.ShowOutput(Translate("Skip Cleaning?"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
    }
    if (_rtnSkipClean == 6)
    {
      MECC::TraceComment(Translate("Admin skipped cleaning decision"));
      return (0);
    }
    else
    {
      _DefineDBFilePath();
      _strSQLStatement = StrConcat2(Translate("SELECT * FROM [HamiltonCleaning] ORDER BY [CleaningDate] DESC"), Translate(""));
      _hndAccessDB.AddField("User", _hndAccessDB_User, hslString, 255);
      _hndAccessDB.AddField("CleaningDate", _strDate, hslString, 8);
      if( 0 == _hndAccessDB.Open(_strAcessDBFilePath + " " + "HamiltonCleaning", hslRead, _strSQLStatement) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
      }
      if( 0 == _hndAccessDB.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != _hndAccessDB.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndAccessDB.RemoveFields();
      _strCurrentDate = TimGetFormattedDate(Translate("%d/%m/%Y "));
      _strCurrentTime = TimGetFormattedTime(Translate("%H:%M:%S"));
      _strCurrentDate = StrConcat2(_strCurrentDate, _strCurrentTime);
      _strCellCalcFilePath = StrConcat2(_strConfigFolderPath, Translate("\\CellCalc.csv"));
      _hndCellCalc.SetExtendedProperties( "HDR=NO");
      _hndCellCalc.AddField("CurrentDate", _strCurrentDate, hslString, 255);
      _hndCellCalc.AddField("Date", _strDate, hslString, 255);
      _hndCellCalc.SetDelimiter(hslCSVDelimited);
      if( 0 == _hndCellCalc.Open(_strCellCalcFilePath, hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strCellCalcFilePath, "HxMetEdCompCmd");
      }
      if( 0 == _hndCellCalc.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != _hndCellCalc.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndCellCalc.RemoveFields();
      _strMethodsFolderPath = FilGetMethodsPath();
      _strBatFilePath = StrConcat2(_strMethodsFolderPath, Translate("\\Sanger\\SGE\\CSVreader.bat"));
      {
        if( 0 == Shell(_strBatFilePath, hslShow, hslSynchronous) )
        {
              MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      _strCellCalc2FilePath = StrConcat2(_strConfigFolderPath, Translate("\\CellCalc2.csv"));
      _hndCellCalc2.AddField("CurrentDate", _fltDaysSinceLastClean, hslFloat);
      _hndCellCalc2.SetDelimiter(hslCSVDelimited);
      if( 0 == _hndCellCalc2.Open(_strCellCalc2FilePath, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strCellCalc2FilePath, "HxMetEdCompCmd");
      }
      if( 0 == _hndCellCalc2.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != _hndCellCalc2.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndCellCalc2.RemoveFields();
      _fltDaysSinceLastClean = MthRound(_fltDaysSinceLastClean, 2);
      StatusDisplay_Update(Translate("Days since last Clean: "), _fltDaysSinceLastClean);
      return (_fltDaysSinceLastClean);
    }
  }

  function StatusDisplay_Init(  ) void {
    private variable _strMethodName;
    private variable _rtnAswStatusValue;
    _strMethodName = GetMethodName(1);
    _rtnAswStatusValue = AswStatusDialog::Initialize(_strMethodName);
    if (_rtnAswStatusValue == 0)
    {
      abort;
    }
  }

  function StatusDisplay_Update( variable _strMessage1, variable _strMessage2 ) void {
    private variable _strTime;
    private variable _rtnAswStatusValue;
    private variable _strMessage;
    _strTime = TimGetFormattedTime(Translate("%H:%M"));
    _strMessage = StrConcat4(_strTime, Translate("\t"), _strMessage1, _strMessage2);
    if(0){
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- AswStatusDialog Update = "), _strMessage);
    }
    _rtnAswStatusValue = AswStatusDialog::AppendText(_strMessage);
    if (_rtnAswStatusValue == 0)
    {
      abort;
    }
  }

  function DoorLock( device & ML_STAR, variable _blnSim, variable _blnLock ) void {
    private dialog dialogHandle_2;
    private variable _loopCounter1;
    if (_blnSim == 0)
    {
      if (_blnLock == 1)
      {
        {
          _loopCounter1 = 0;
          while (1 == 1)
          {
            _loopCounter1 = _loopCounter1 + 1;
            onerror goto errLabel_3 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_3 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_2.SetOutput(Translate("The next step cannot be performed as the Hamilton cover is open. \n"), Translate("Please close the cover and hit 'OK' to continue."));
              dialogHandle_2.ShowOutput(Translate("Error: Cover Open"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Hamilton covers: "), Translate("Locked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Locked"));
      }
      else
      {
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Hamilton covers: "), Translate("Unlocked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Unlocked"));
      }
    }
    else
    {
      if (_blnLock == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Sim - Hamilton covers: "), Translate("Locked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Locked"));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Sim - Hamilton covers: "), Translate("Unlocked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Unlocked"));
      }
    }
  }

  function TipCheck( sequence & _seqTips, variable _strTipCounter, variable _intTipsNeeded ) variable {
    private variable _intMaxNumberOfTips;
    private variable _hndTipCounter_Value;
    private variable _hndTipCounter_TipCounter;
    private file _hndTipCounter;
    private variable _loopCounter1;
    private variable _arrTipCounterName[];
    private variable _arrTipCounterValue[];
    private variable _intTipCounterValue;
    private variable _rtnLookup;
    private variable _intNumberOfOnDeckTips;
    private variable _blnReturnValue;
    SeqResetSequenceIndexes(_seqTips);
    _intMaxNumberOfTips = _seqTips.GetCount();
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("///// intMaxNumberOfTips = "), _intMaxNumberOfTips);
    _arrTipCounterName.SetSize(0);
    _arrTipCounterValue.SetSize(0);
    _DefineDBFilePath();
    _hndTipCounter.AddField("TipCounter", _hndTipCounter_TipCounter, hslString, 255);
    _hndTipCounter.AddField("Value", _hndTipCounter_Value, hslInteger);
    if( 0 == _hndTipCounter.Open(_strAcessDBFilePath + " " + "TipCounter", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
    }
    {
      _loopCounter1 = 0;
      while (
         (_hndTipCounter.Eof() == 0)
      )
      {
        _loopCounter1 = _loopCounter1 + 1;
        if( 0 == _hndTipCounter.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _arrTipCounterName.AddAsLast(_hndTipCounter_TipCounter);
        _arrTipCounterValue.AddAsLast(_hndTipCounter_Value);
      }
    }
    if( 0 != _hndTipCounter.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndTipCounter.RemoveFields();
    _rtnLookup = LOOKUP::Lookup(_arrTipCounterName, _strTipCounter);
    if (_rtnLookup != 0)
    {
      _intTipCounterValue=_arrTipCounterValue.GetAt(_rtnLookup-1);
    }
    else
    {
      _intTipCounterValue = 1;
      _hndTipCounter.AddField("TipCounter", _strTipCounter, hslString, 255);
      _hndTipCounter.AddField("Value", _intTipCounterValue, hslInteger);
      if( 0 == _hndTipCounter.Open(_strAcessDBFilePath + " " + "TipCounter", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAcessDBFilePath, "HxMetEdCompCmd");
      }
      if( 0 == _hndTipCounter.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != _hndTipCounter.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndTipCounter.RemoveFields();
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("///// _intTipCounterValue = "), _intTipCounterValue);
    _intNumberOfOnDeckTips = 0;
    _intNumberOfOnDeckTips = _intMaxNumberOfTips - _intTipCounterValue + 1;
    Trace("///// _intNumberOfOnDeckTips = ", _intNumberOfOnDeckTips);
    if (_intTipsNeeded > _intMaxNumberOfTips)
    {
      MECC::TraceComment(Translate("Tip requirement for this process exceeds deck capacity. Method Abort"));
      abort;
    }
    else
    {
      if (_intTipsNeeded > _intNumberOfOnDeckTips)
      {
        MECC::TraceComment(Translate("Tip requirement for this process exceeds current on-deck deck capacity. Tip reload required"));
        _blnReturnValue = 1;
      }
      else
      {
        MECC::TraceComment(Translate("Tip requirement for this process does not exceed current on-deck deck capacity. No tip reload required."));
        _blnReturnValue = 0;
      }
    }
    return (_blnReturnValue);
  }

  private function _DefineDBFilePath(  ) void {
    _strConfigFolderPath = FilGetConfigPath();
    _strAcessDBFilePath = StrConcat2(_strConfigFolderPath, Translate("\\CellCultureTracking.mdb"));
  }
} // library namespace
