#pragma once
#include "HSLDeckVisualize.hsl"
#include "HSLTipCountingLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "PasswordBox.hs_"
#include "HSLDevLib.hsl"
#include "HSLTrcLib.hsl"
#include "TrackLightHelper.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace LOAD_INSTRUCTIONS_AUTOLOAD {
  function load_instructions_autoload( device & instrument, sequence & load_sequence, variable load_message, variable start_track_number, variable total_number_tracks ) void ;
  function load_instructions_autoload_carrier( device & instrument, variable load_message, variable start_track_number, variable total_number_tracks ) void ;
  function load_instructions_autoload_one_seq_pos( device & instrument, sequence load_sequence, variable sequence_index, variable load_message, variable start_track_number, variable total_number_tracks ) void ;
  function load_instructions_autoload_return_double_checked_plate_name( device & instrument, sequence & load_sequence, variable load_message, variable & plate_name, variable start_track_number, variable total_number_tracks ) void ;
  function load_instructions_autoload_return_double_checked_plate_name_using_password_box( device & instrument, sequence & load_sequence, variable load_message, variable & plate_name, variable start_track_number, variable total_number_tracks ) void ;
  function load_instructions_autoload_return_double_checked_tube_name_array( device & instrument, sequence & load_sequence, variable load_message, variable & tube_name_array[], variable start_track_number, variable total_number_tracks ) void ;
  function load_instructions_autoload_return_double_checked_tube_name_array_using_password_box( device & instrument, sequence & load_sequence, variable load_message, variable & tube_name_array[], variable start_track_number, variable total_number_tracks ) void ;
  function load_instructions_autoload_tips( device & ML_STAR, sequence & seq_tips, variable tip_size, variable tips_needed, variable tip_counter, variable filter_flag, variable start_track_number, variable total_number_tracks ) void ;
  function load_instructions_autoload_tube_IDs_from_array( device & instrument, sequence & load_sequence, variable & tube_name_array[], variable start_track_number, variable total_number_tracks ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PASSWORDBOX::_InitLibrary();
    TRACKLIGHTHELPER::_InitLibrary();
  }
  function _ExitLibrary() {
    PASSWORDBOX::_ExitLibrary();
    TRACKLIGHTHELPER::_ExitLibrary();
  }

  function load_instructions_autoload( device & instrument, sequence & load_sequence, variable load_message, variable start_track_number, variable total_number_tracks ) void {
    private dialog dialogHandle_1;
    private variable autoload_check_return;
    private variable key;
    private variable loopCounter1;
    private variable current_track;
    key = 3;
    autoload_check_return = DevGetCfgValueWithKey(instrument, key);
    if (autoload_check_return == 0)
    {
      TrcTrace(Translate("-------------autoload not detected, lights not flashed"), Translate(""));
    }
    else
    {
      TrcTrace8(Translate("--------------Track lights flashed starting at track "), start_track_number, Translate(" for "), total_number_tracks, Translate(" tracks"), Translate(""), Translate(""), Translate(""));
      current_track = start_track_number;
      {
        for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
        {
          loopCounter1 = loopCounter1 + 1;
          TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOnBlinking, instrument);
          current_track = current_track + 1;
        }
      }
    }
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence, 6, Translate(""));
    dialogHandle_1.SetOutput(load_message);
    dialogHandle_1.ShowOutput(Translate("Load Instructions"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence, 5, Translate(""));
    current_track = start_track_number;
    {
      for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOff, instrument);
        current_track = current_track + 1;
      }
    }
  }

  function load_instructions_autoload_return_double_checked_plate_name( device & instrument, sequence & load_sequence, variable load_message, variable & plate_name, variable start_track_number, variable total_number_tracks ) void {
    private dialog dialogHandle_2;
    private variable plate_name_1;
    private variable plate_name_2;
    private variable loopCounter1;
    private dialog dialogHandle_3;
    private dialog dialogHandle_4;
    private dialog dialogHandle_5;
    private variable autoload_check_return;
    private variable key;
    private variable current_track;
    plate_name = 0;
    key = 3;
    autoload_check_return = DevGetCfgValueWithKey(instrument, key);
    if (autoload_check_return == 0)
    {
      TrcTrace(Translate("-------------autoload not detected, lights not flashed"), Translate(""));
    }
    else
    {
      TrcTrace8(Translate("--------------Track lights flashed starting at track "), start_track_number, Translate(" for "), total_number_tracks, Translate(" tracks"), Translate(""), Translate(""), Translate(""));
      current_track = start_track_number;
      {
        for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
        {
          loopCounter1 = loopCounter1 + 1;
          TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOnBlinking, instrument);
          current_track = current_track + 1;
        }
      }
    }
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence, 6, Translate(""));
    dialogHandle_2.SetOutput(load_message);
    dialogHandle_2.ShowOutput(Translate("Load Instructions"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        dialogHandle_3.SetInputSize(2);
        dialogHandle_3.SetInputField(0, Translate("Enter plate ID"), hslString, "");
        dialogHandle_3.SetInputField(1, Translate("Re-enter plate ID"), hslString, "");
        dialogHandle_3.ShowInput(Translate("Plate name"), hslInfinite, hslOKOnly | hslDefButton1);
        plate_name_1 = dialogHandle_3.GetInputField(0);
        plate_name_2 = dialogHandle_3.GetInputField(1);
        if (plate_name_1 == "")
        {
          dialogHandle_4.SetOutput(Translate("No plate name was entered, please try again."));
          dialogHandle_4.ShowOutput(Translate("Error"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
        }
        else
        {
          if (plate_name_1 == plate_name_2)
          {
            break;
          }
          else
          {
            dialogHandle_5.SetOutput(Translate("The plate names entered were not the same, please try again."));
            dialogHandle_5.ShowOutput(Translate("Error"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
          }
        }
      }
    }
    plate_name = plate_name_1;
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence, 5, Translate(""));
    current_track = start_track_number;
    {
      for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOff, instrument);
        current_track = current_track + 1;
      }
    }
  }

  function load_instructions_autoload_return_double_checked_plate_name_using_password_box( device & instrument, sequence & load_sequence, variable load_message, variable & plate_name, variable start_track_number, variable total_number_tracks ) void {
    private dialog dialogHandle_6;
    private variable user_text;
    private variable button_pressed;
    private variable loopCounter2;
    private dialog dialogHandle_7;
    private variable autoload_check_return;
    private variable key;
    private variable loopCounter1;
    private variable current_track;
    plate_name = 0;
    key = 3;
    autoload_check_return = DevGetCfgValueWithKey(instrument, key);
    if (autoload_check_return == 0)
    {
      TrcTrace(Translate("-------------autoload not detected, lights not flashed"), Translate(""));
    }
    else
    {
      TrcTrace8(Translate("--------------Track lights flashed starting at track "), start_track_number, Translate(" for "), total_number_tracks, Translate(" tracks"), Translate(""), Translate(""), Translate(""));
      current_track = start_track_number;
      {
        for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
        {
          loopCounter1 = loopCounter1 + 1;
          TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOnBlinking, instrument);
          current_track = current_track + 1;
        }
      }
    }
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence, 6, Translate(""));
    dialogHandle_6.SetOutput(load_message);
    dialogHandle_6.ShowOutput(Translate("Load Instructions"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        PASSWORDBOX::ShowPasswordBox(Translate("Plate ID entry"), Translate("Plate ID"), Translate("Confirm plate ID"), Translate("*"), Translate("Cancel"), Translate("OK"), Translate("Error"), Translate("The plate IDs you typed do not match, or you didn't enter a plate ID."), button_pressed, user_text);
        if (button_pressed != 1)
        {
          dialogHandle_7.SetOutput(Translate("No plate name was entered, please try again."));
          dialogHandle_7.ShowOutput(Translate("Error"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
        }
        else
        {
          break;
        }
      }
    }
    plate_name = user_text;
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence, 5, Translate(""));
    current_track = start_track_number;
    {
      for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOff, instrument);
        current_track = current_track + 1;
      }
    }
  }

  function load_instructions_autoload_tips( device & ML_STAR, sequence & seq_tips, variable tip_size, variable tips_needed, variable tip_counter, variable filter_flag, variable start_track_number, variable total_number_tracks ) void {
    private variable tips_available;
    private sequence seq_tips_complete;
    private variable seq_start;
    private dialog dialogHandle_8;
    private variable filter_text;
    private dialog dialogHandle_9;
    private variable autoload_check_return;
    private variable key;
    private variable loopCounter1;
    private variable current_track;
    key = 3;
    autoload_check_return = DevGetCfgValueWithKey(ML_STAR, key);
    if (autoload_check_return == 0)
    {
      TrcTrace(Translate("-------------autoload not detected, lights not flashed"), Translate(""));
    }
    else
    {
      TrcTrace8(Translate("--------------Track lights flashed starting at track "), start_track_number, Translate(" for "), total_number_tracks, Translate(" tracks"), Translate(""), Translate(""), Translate(""));
      current_track = start_track_number;
      {
        for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
        {
          loopCounter1 = loopCounter1 + 1;
          TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOnBlinking, ML_STAR);
          current_track = current_track + 1;
        }
      }
    }
    if (filter_flag == 1)
    {
      filter_text = Translate(" filter ");
    }
    else
    {
      filter_text = Translate("");
    }
    SeqCopySequence(seq_tips_complete, seq_tips);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_tips_complete, 6, Translate(""));
    dialogHandle_8.SetOutput(Translate("Please load at least "), tips_needed, Translate(" "), tip_size, Translate(" µl "), filter_text, Translate("tips at the flashing position and edit the tip counter."));
    dialogHandle_8.ShowOutput(Translate("Load Instruction"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    TipCount::Edit2(seq_tips, tip_counter, ML_STAR, 86400);
    seq_start = seq_tips.GetCount();
    if (seq_start == 0)
    {
      tips_available = 0;
    }
    else
    {
      tips_available = SeqGetTotal(seq_tips);
    }
    if (tips_available < tips_needed)
    {
      dialogHandle_9.SetOutput(Translate("This is not enough tips - Please refill all the racks with new "), tip_size, Translate(" µl  "), filter_text, Translate("tips."));
      dialogHandle_9.ShowOutput(Translate("Load Instruction"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
      TipCount::Write2(seq_tips_complete, tip_counter, ML_STAR);
      TipCount::Read2(seq_tips, tip_counter, ML_STAR);
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_tips_complete, 5, Translate(""));
    current_track = start_track_number;
    {
      for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOff, ML_STAR);
        current_track = current_track + 1;
      }
    }
  }

  function load_instructions_autoload_return_double_checked_tube_name_array( device & instrument, sequence & load_sequence, variable load_message, variable & tube_name_array[], variable start_track_number, variable total_number_tracks ) void {
    private variable loopCounter1;
    private variable tube_name_1;
    private variable tube_name_2;
    private dialog dialogHandle_10;
    private variable loopCounter4;
    private dialog dialogHandle_11;
    private sequence load_sequence_temp;
    private variable temp_seq_length;
    private dialog dialogHandle_12;
    private dialog dialogHandle_13;
    private variable autoload_check_return;
    private variable key;
    private variable current_track;
    tube_name_array.SetSize( 0);
    key = 3;
    autoload_check_return = DevGetCfgValueWithKey(instrument, key);
    if (autoload_check_return == 0)
    {
      TrcTrace(Translate("-------------autoload not detected, lights not flashed"), Translate(""));
    }
    else
    {
      TrcTrace8(Translate("--------------Track lights flashed starting at track "), start_track_number, Translate(" for "), total_number_tracks, Translate(" tracks"), Translate(""), Translate(""), Translate(""));
      current_track = start_track_number;
      {
        for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
        {
          loopCounter1 = loopCounter1 + 1;
          TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOnBlinking, instrument);
          current_track = current_track + 1;
        }
      }
    }
    SeqCopySequence(load_sequence_temp, load_sequence);
    temp_seq_length = SeqGetTotal(load_sequence_temp);
    tube_name_array.SetSize(0);
    load_sequence_temp.SetCount(1);
    load_sequence_temp.SetCurrentPosition(1);
    {
      for(loopCounter4 = 0; loopCounter4 < temp_seq_length;)
      {
        loopCounter4 = loopCounter4 + 1;
        DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 6, Translate(""));
        dialogHandle_11.SetOutput(load_message);
        dialogHandle_11.ShowOutput(Translate("Load Instructions"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            dialogHandle_10.SetInputSize(2);
            dialogHandle_10.SetInputField(0, Translate("Enter tube ID"), hslString, "");
            dialogHandle_10.SetInputField(1, Translate("Re-enter tube ID"), hslString, "");
            dialogHandle_10.ShowInput(Translate("Tube name"), hslInfinite, hslOKOnly | hslDefButton1);
            tube_name_1 = dialogHandle_10.GetInputField(0);
            tube_name_2 = dialogHandle_10.GetInputField(1);
            if (tube_name_1 == "")
            {
              dialogHandle_13.SetOutput(Translate("No tube name was entered, please try again."));
              dialogHandle_13.ShowOutput(Translate("Error"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
            }
            else
            {
              if (tube_name_1 == tube_name_2)
              {
                break;
              }
              else
              {
                dialogHandle_12.SetOutput(Translate("The tube names entered were not the same, please try again."));
                dialogHandle_12.ShowOutput(Translate("Error"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
              }
            }
          }
        }
        tube_name_array.AddAsLast(tube_name_1);
        DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 5, Translate(""));
        SeqRemoveAt(load_sequence_temp, 1);
      }
    }
    current_track = start_track_number;
    {
      for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOff, instrument);
        current_track = current_track + 1;
      }
    }
  }

  function load_instructions_autoload_return_double_checked_tube_name_array_using_password_box( device & instrument, sequence & load_sequence, variable load_message, variable & tube_name_array[], variable start_track_number, variable total_number_tracks ) void {
    private variable loopCounter4;
    private dialog dialogHandle_14;
    private variable temp_seq_length;
    private sequence load_sequence_temp;
    private variable user_text;
    private variable button_pressed;
    private variable loopCounter2;
    private dialog dialogHandle_15;
    private variable autoload_check_return;
    private variable key;
    private variable loopCounter1;
    private variable current_track;
    tube_name_array.SetSize( 0);
    key = 3;
    autoload_check_return = DevGetCfgValueWithKey(instrument, key);
    if (autoload_check_return == 0)
    {
      TrcTrace(Translate("-------------autoload not detected, lights not flashed"), Translate(""));
    }
    else
    {
      TrcTrace8(Translate("--------------Track lights flashed starting at track "), start_track_number, Translate(" for "), total_number_tracks, Translate(" tracks"), Translate(""), Translate(""), Translate(""));
      current_track = start_track_number;
      {
        for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
        {
          loopCounter1 = loopCounter1 + 1;
          TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOnBlinking, instrument);
          current_track = current_track + 1;
        }
      }
    }
    SeqCopySequence(load_sequence_temp, load_sequence);
    temp_seq_length = SeqGetTotal(load_sequence_temp);
    tube_name_array.SetSize(0);
    load_sequence_temp.SetCount(1);
    load_sequence_temp.SetCurrentPosition(1);
    {
      for(loopCounter4 = 0; loopCounter4 < temp_seq_length;)
      {
        loopCounter4 = loopCounter4 + 1;
        DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 6, Translate(""));
        dialogHandle_14.SetOutput(load_message);
        dialogHandle_14.ShowOutput(Translate("Load Instructions"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        {
          loopCounter2 = 0;
          while (1 == 1)
          {
            loopCounter2 = loopCounter2 + 1;
            PASSWORDBOX::ShowPasswordBox(Translate("Tube ID entry"), Translate("Tube ID"), Translate("Confirm tube ID"), Translate("*"), Translate("Cancel"), Translate("OK"), Translate("Error"), Translate("The tube IDs you typed do not match, or you didn't enter a tube ID."), button_pressed, user_text);
            if (button_pressed != 1)
            {
              dialogHandle_15.SetOutput(Translate("No plate name was entered, please try again."));
              dialogHandle_15.ShowOutput(Translate("Error"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
            }
            else
            {
              break;
            }
          }
        }
        tube_name_array.AddAsLast(user_text);
        DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 5, Translate(""));
        SeqRemoveAt(load_sequence_temp, 1);
      }
    }
    SeqResetSequenceIndexes(load_sequence);
    current_track = start_track_number;
    {
      for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOff, instrument);
        current_track = current_track + 1;
      }
    }
  }

  function load_instructions_autoload_one_seq_pos( device & instrument, sequence load_sequence, variable sequence_index, variable load_message, variable start_track_number, variable total_number_tracks ) void {
    private dialog dialogHandle_16;
    private variable load_sequence_labware_ID;
    private sequence load_sequence_temp;
    private variable autoload_check_return;
    private variable key;
    private variable loopCounter1;
    private variable current_track;
    key = 3;
    autoload_check_return = DevGetCfgValueWithKey(instrument, key);
    if (autoload_check_return == 0)
    {
      TrcTrace(Translate("-------------autoload not detected, lights not flashed"), Translate(""));
    }
    else
    {
      TrcTrace8(Translate("--------------Track lights flashed starting at track "), start_track_number, Translate(" for "), total_number_tracks, Translate(" tracks"), Translate(""), Translate(""), Translate(""));
      current_track = start_track_number;
      {
        for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
        {
          loopCounter1 = loopCounter1 + 1;
          TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOnBlinking, instrument);
          current_track = current_track + 1;
        }
      }
    }
    load_sequence_labware_ID = SeqGetLabwareId(load_sequence);
    SeqCopySequence(load_sequence_temp, load_sequence);
    SeqRemoveAll(load_sequence_temp);
    sequence_index = StrIStr(sequence_index);
    SeqAdd(load_sequence_temp, load_sequence_labware_ID, sequence_index);
    load_sequence_temp.SetCurrentPosition(1);
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 6, Translate(""));
    dialogHandle_16.SetOutput(load_message);
    dialogHandle_16.ShowOutput(Translate("Load Instructions"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 5, Translate(""));
    current_track = start_track_number;
    {
      for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOff, instrument);
        current_track = current_track + 1;
      }
    }
  }

  function load_instructions_autoload_carrier( device & instrument, variable load_message, variable start_track_number, variable total_number_tracks ) void {
    private variable autoload_check_return;
    private variable key;
    private variable loopCounter1;
    private variable current_track;
    private dialog dialogHandle_17;
    key = 3;
    autoload_check_return = DevGetCfgValueWithKey(instrument, key);
    if (autoload_check_return == 0)
    {
      TrcTrace(Translate("-------------autoload not detected, lights not flashed"), Translate(""));
    }
    else
    {
      TrcTrace8(Translate("--------------Track lights flashed starting at track "), start_track_number, Translate(" for "), total_number_tracks, Translate(" tracks"), Translate(""), Translate(""), Translate(""));
      current_track = start_track_number;
      {
        for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
        {
          loopCounter1 = loopCounter1 + 1;
          TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOnBlinking, instrument);
          current_track = current_track + 1;
        }
      }
    }
    dialogHandle_17.SetOutput(load_message);
    dialogHandle_17.ShowOutput(Translate("Load Instructions"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    current_track = start_track_number;
    {
      for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOff, instrument);
        current_track = current_track + 1;
      }
    }
  }

  function load_instructions_autoload_tube_IDs_from_array( device & instrument, sequence & load_sequence, variable & tube_name_array[], variable start_track_number, variable total_number_tracks ) void {
    private dialog dialogHandle_18;
    private variable autoload_check_return;
    private variable key;
    private variable loopCounter1;
    private variable tube_name;
    private variable array_size;
    private variable load_message;
    private variable loopCounter4;
    private variable temp_seq_length;
    private variable current_track;
    private sequence load_sequence_temp;
    private variable pos;
    key = 3;
    autoload_check_return = DevGetCfgValueWithKey(instrument, key);
    if (autoload_check_return == 0)
    {
      TrcTrace(Translate("-------------autoload not detected, lights not flashed"), Translate(""));
    }
    else
    {
      TrcTrace8(Translate("--------------Track lights flashed starting at track "), start_track_number, Translate(" for "), total_number_tracks, Translate(" tracks"), Translate(""), Translate(""), Translate(""));
      current_track = start_track_number;
      {
        for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
        {
          loopCounter1 = loopCounter1 + 1;
          TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOnBlinking, instrument);
          current_track = current_track + 1;
        }
      }
    }
    SeqCopySequence(load_sequence_temp, load_sequence);
    temp_seq_length = SeqGetTotal(load_sequence_temp);
    array_size=tube_name_array.GetSize();
    load_sequence_temp.SetCount(1);
    load_sequence_temp.SetCurrentPosition(1);
    {
      for(loopCounter4 = 0; loopCounter4 < array_size;)
      {
        loopCounter4 = loopCounter4 + 1;
        tube_name=tube_name_array.GetAt(loopCounter4-1);
        pos = SeqGetPositionId(load_sequence_temp);
        load_message = StrConcat4(Translate("Put tube\n\n"), tube_name, Translate("\n\nin the flashing position - position "), pos);
        DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 6, Translate(""));
        dialogHandle_18.SetOutput(load_message);
        dialogHandle_18.ShowOutput(Translate("Load Instructions"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 5, Translate(""));
        SeqRemoveAt(load_sequence_temp, 1);
      }
    }
    current_track = start_track_number;
    {
      for(loopCounter1 = 0; loopCounter1 < total_number_tracks;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACKLIGHTHELPER::PerformTrackLightCommand(current_track, TurnLightOff, instrument);
        current_track = current_track + 1;
      }
    }
  }
} // library namespace
