#pragma once
#include "HSLDeckVisualize.hsl"
#include "HSLTipCountingLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "PasswordBox.hs_"
#include "ASWStandardDialogs\\ASWStandardDialogs.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace LOAD_INSTRUCTIONSV2 {
  function load_instructions( device & instrument, sequence & load_sequence, variable load_message ) void ;
  function load_instructions_one_seq_pos( device & instrument, sequence load_sequence, variable sequence_index, variable load_message ) void ;
  function load_instructions_return_double_checked_plate_name_using_password_box( device & instrument, sequence & load_sequence, variable load_message, variable & plate_name ) void ;
  function load_instructions_return_double_checked_tube_name_array_using_password_box( device & instrument, sequence & load_sequence, variable load_message, variable & tube_name_array[] ) void ;
  function load_instructions_tips( device & ML_STAR, sequence & seq_tips, variable tip_size, variable tips_needed, variable tip_counter, variable filter_flag ) void ;
  function load_instructions_tube_IDs_from_array( device & instrument, sequence & load_sequence, variable & tube_name_array[] ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PASSWORDBOX::_InitLibrary();
  }
  function _ExitLibrary() {
    PASSWORDBOX::_ExitLibrary();
  }

  function load_instructions( device & instrument, sequence & load_sequence, variable load_message ) void {
    AswStandardDialogs::Initialize();
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence, 6, Translate(""));
    AswStandardDialogs::MessageDialog(Translate("Load Instructions"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, load_message);
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence, 5, Translate(""));
    AswStandardDialogs::Terminate();
  }

  function load_instructions_return_double_checked_plate_name_using_password_box( device & instrument, sequence & load_sequence, variable load_message, variable & plate_name ) void {
    private variable arrRes[];
    plate_name = 0;
    AswStandardDialogs::Initialize();
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence, 6, Translate(""));
    arrRes.SetSize(0);
    arrRes.AddAsLast(Translate("Plate ID"));
    arrRes.AddAsLast(Translate("Confirm Plate ID"));
    AswStandardDialogs::DoubleInputDialogSetResources(arrRes);
    AswStandardDialogs::DoubleInputDialog(Translate("Load Instructions"), AswStandardDialogs::ButtonType::Ok, 0, 0, load_message, Translate("The two entries do not match."), plate_name);
    TrcTrace(Translate("User entry = "), plate_name);
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence, 5, Translate(""));
    AswStandardDialogs::Terminate();
  }

  function load_instructions_tips( device & ML_STAR, sequence & seq_tips, variable tip_size, variable tips_needed, variable tip_counter, variable filter_flag ) void {
    private variable tips_available;
    private sequence seq_tips_complete;
    private variable seq_start;
    private variable filter_text;
    private dialog dialogHandle_1;
    private variable load_message;
    AswStandardDialogs::Initialize();
    if (filter_flag == 1)
    {
      filter_text = Translate(" filter ");
    }
    else
    {
      filter_text = Translate("");
    }
    SeqCopySequence(seq_tips_complete, seq_tips);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_tips_complete, 6, Translate(""));
    load_message = StrConcat8(Translate("Please load at least "), tips_needed, Translate(" "), tip_size, Translate(" µl "), filter_text, Translate("tips at the flashing position and edit the tip counter."), Translate(""));
    AswStandardDialogs::MessageDialog(Translate("Load Instructions"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, load_message);
    TipCount::Edit2(seq_tips, tip_counter, ML_STAR, 86400);
    seq_start = seq_tips.GetCount();
    if (seq_start == 0)
    {
      tips_available = 0;
    }
    else
    {
      tips_available = SeqGetTotal(seq_tips);
    }
    if (tips_available < tips_needed)
    {
      dialogHandle_1.SetOutput(Translate("This is not enough tips - Please refill all the racks with new "), tip_size, Translate(" µl  "), filter_text, Translate("tips."));
      dialogHandle_1.ShowOutput(Translate("Load Instruction"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
      TipCount::Write2(seq_tips_complete, tip_counter, ML_STAR);
      TipCount::Read2(seq_tips, tip_counter, ML_STAR);
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_tips_complete, 5, Translate(""));
    AswStandardDialogs::Terminate();
  }

  function load_instructions_return_double_checked_tube_name_array_using_password_box( device & instrument, sequence & load_sequence, variable load_message, variable & tube_name_array[] ) void {
    private variable loopCounter4;
    private variable temp_seq_length;
    private sequence load_sequence_temp;
    private variable user_text;
    private variable arrRes[];
    private variable plate_name;
    tube_name_array.SetSize( 0);
    AswStandardDialogs::Initialize();
    SeqCopySequence(load_sequence_temp, load_sequence);
    temp_seq_length = SeqGetTotal(load_sequence_temp);
    tube_name_array.SetSize(0);
    load_sequence_temp.SetCount(1);
    load_sequence_temp.SetCurrentPosition(1);
    {
      for(loopCounter4 = 0; loopCounter4 < temp_seq_length;)
      {
        loopCounter4 = loopCounter4 + 1;
        DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 6, Translate(""));
        arrRes.SetSize(0);
        arrRes.AddAsLast(Translate("Tube ID"));
        arrRes.AddAsLast(Translate("Confirm Tube ID"));
        AswStandardDialogs::DoubleInputDialogSetResources(arrRes);
        AswStandardDialogs::DoubleInputDialog(Translate("Load Instructions"), AswStandardDialogs::ButtonType::Ok, 0, 0, load_message, Translate("The two entries do not match."), user_text);
        TrcTrace(Translate("User entry = "), user_text);
        tube_name_array.AddAsLast(user_text);
        DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 5, Translate(""));
        SeqRemoveAt(load_sequence_temp, 1);
      }
    }
    SeqResetSequenceIndexes(load_sequence);
    AswStandardDialogs::Terminate();
  }

  function load_instructions_tube_IDs_from_array( device & instrument, sequence & load_sequence, variable & tube_name_array[] ) void {
    private variable loopCounter4;
    private variable temp_seq_length;
    private sequence load_sequence_temp;
    private variable array_size;
    private variable tube_name;
    private variable load_message;
    private variable pos;
    AswStandardDialogs::Initialize();
    SeqCopySequence(load_sequence_temp, load_sequence);
    temp_seq_length = SeqGetTotal(load_sequence_temp);
    array_size=tube_name_array.GetSize();
    load_sequence_temp.SetCount(1);
    load_sequence_temp.SetCurrentPosition(1);
    {
      for(loopCounter4 = 0; loopCounter4 < array_size;)
      {
        loopCounter4 = loopCounter4 + 1;
        tube_name=tube_name_array.GetAt(loopCounter4-1);
        pos = SeqGetPositionId(load_sequence_temp);
        load_message = StrConcat4(Translate("Put tube\n\n"), tube_name, Translate("\n\nin the flashing position - position "), pos);
        DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 6, Translate(""));
        AswStandardDialogs::MessageDialog(Translate("Load Instructions"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, load_message);
        DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 5, Translate(""));
        SeqRemoveAt(load_sequence_temp, 1);
      }
    }
    AswStandardDialogs::Terminate();
  }

  function load_instructions_one_seq_pos( device & instrument, sequence load_sequence, variable sequence_index, variable load_message ) void {
    private variable load_sequence_labware_ID;
    private sequence load_sequence_temp;
    AswStandardDialogs::Initialize();
    load_sequence_labware_ID = SeqGetLabwareId(load_sequence);
    SeqCopySequence(load_sequence_temp, load_sequence);
    SeqRemoveAll(load_sequence_temp);
    sequence_index = StrIStr(sequence_index);
    SeqAdd(load_sequence_temp, load_sequence_labware_ID, sequence_index);
    load_sequence_temp.SetCurrentPosition(1);
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 6, Translate(""));
    AswStandardDialogs::MessageDialog(Translate("Load Instructions"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, load_message);
    DeckVisualize::UpdateUsedPositions(instrument, load_sequence_temp, 5, Translate(""));
    AswStandardDialogs::Terminate();
  }
} // library namespace
