#pragma once
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLMappingReport.hsl"
#include "HSLStrLib.hsl"
#include "lookup.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace OPT_ORDER {
  function OptChannels_AspDisp2Vol( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_volume2[], device & ML_STAR ) void ;
  function OptChannels_AspDispVol( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], device & ML_STAR ) void ;
  function OptChannels_Pos( sequence & sequence_for_sorting, device & ML_STAR ) void ;
  function OptChannels_PosVol( sequence & sequence_for_sorting, variable & array_volume[], device & ML_STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOOKUP::_InitLibrary();
  }
  function _ExitLibrary() {
    LOOKUP::_ExitLibrary();
  }

  function OptChannels_AspDispVol( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable lookup_return;
    private variable deltaY;
    private variable LoopsNum;
    private variable disp_labid;
    private variable asp_angle;
    private variable sql_statement;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable disp_posid;
    private variable volume;
    private variable loopCounter1;
    private variable array_size;
    private variable seq_sort_file;
    private variable Unique_x_coordinate;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_y_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuesPosID[];
    private variable arr_valuesdestposid[];
    private variable arr_valuespdestlabid[];
    seq_sort_file = "C:\\Program Files (x86)\\HAMILTON\\LogFiles\\dummy.xls";
    seq_sort_file2 = "C:\\Program Files (x86)\\HAMILTON\\LogFiles\\.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        disp_labid = SeqGetLabwareId(secondary_seq);
        disp_posid = SeqGetPositionId(secondary_seq);
        volume=array_volume.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslFloat);
    seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    array_volume.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        arr_valuespdestlabid.SetSize(0);
        arr_valuesdestposid.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslFloat);
        seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
        seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesprocessed.AddAsLast(0);
            arr_valuespdestlabid.AddAsLast(disp_labid);
            arr_valuesdestposid.AddAsLast(disp_posid);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = LOOKUP::Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    disp_labid=arr_valuespdestlabid.GetAt(loopCounter4-1);
                    disp_posid=arr_valuesdestposid.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    SeqAdd(secondary_seq, disp_labid, disp_posid);
                    Unique_y_coordinate = asp_y_coord;
                    array_volume.AddAsLast(volume);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }

  function OptChannels_PosVol( sequence & sequence_for_sorting, variable & array_volume[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable lookup_return;
    private variable deltaY;
    private variable LoopsNum;
    private variable sql_statement;
    private variable asp_angle;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable volume;
    private variable loopCounter1;
    private variable array_size;
    private variable Unique_x_coordinate;
    private variable seq_sort_file;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable asp_y_coord;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\Program Files (x86)\\HAMILTON\\LogFiles\\dummy.xls";
    seq_sort_file2 = "C:\\Program Files (x86)\\HAMILTON\\LogFiles\\.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        volume=array_volume.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslFloat);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    array_volume.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslFloat);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesprocessed.AddAsLast(0);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = LOOKUP::Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    Unique_y_coordinate = asp_y_coord;
                    array_volume.AddAsLast(volume);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
  }

  function OptChannels_Pos( sequence & sequence_for_sorting, device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable lookup_return;
    private variable deltaY;
    private variable LoopsNum;
    private variable sql_statement;
    private variable asp_angle;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable loopCounter1;
    private variable array_size;
    private variable Unique_x_coordinate;
    private variable seq_sort_file;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable asp_y_coord;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\Program Files (x86)\\HAMILTON\\LogFiles\\dummy.xls";
    seq_sort_file2 = "C:\\Program Files (x86)\\HAMILTON\\LogFiles\\.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesprocessed.AddAsLast(0);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = LOOKUP::Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    Unique_y_coordinate = asp_y_coord;
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
  }

  function OptChannels_AspDisp2Vol( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_volume2[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable deltaY;
    private variable lookup_return;
    private variable LoopsNum;
    private variable disp_labid;
    private variable sql_statement;
    private variable asp_angle;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable disp_posid;
    private variable volume;
    private variable array_size;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable Unique_x_coordinate;
    private variable seq_sort_file;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_y_coord;
    private variable loopCounter4;
    private variable asp_z_coord;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesdestposid[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuespdestlabid[];
    private variable arr_valuesPosID[];
    private variable volume2;
    private variable arr_valuesvol2[];
    seq_sort_file = "C:\\Program Files (x86)\\HAMILTON\\LogFiles\\dummy.xls";
    seq_sort_file2 = "C:\\Program Files (x86)\\HAMILTON\\LogFiles\\.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("volume2", volume2, hslFloat);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        disp_labid = SeqGetLabwareId(secondary_seq);
        disp_posid = SeqGetPositionId(secondary_seq);
        volume=array_volume.GetAt(loopCounter1-1);
        volume2=array_volume2.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("volume2", volume2, hslFloat);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslFloat);
    seq_sort2.AddField("volume2", volume2, hslFloat);
    seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    array_volume.SetSize(0);
    array_volume2.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesvol2.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        arr_valuespdestlabid.SetSize(0);
        arr_valuesdestposid.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslFloat);
        seq_sort2.AddField("volume2", volume2, hslFloat);
        seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
        seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesvol2.AddAsLast(volume2);
            arr_valuesprocessed.AddAsLast(0);
            arr_valuespdestlabid.AddAsLast(disp_labid);
            arr_valuesdestposid.AddAsLast(disp_posid);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = LOOKUP::Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    disp_labid=arr_valuespdestlabid.GetAt(loopCounter4-1);
                    disp_posid=arr_valuesdestposid.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    volume2=arr_valuesvol2.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    SeqAdd(secondary_seq, disp_labid, disp_posid);
                    Unique_y_coordinate = asp_y_coord;
                    array_volume.AddAsLast(volume);
                    array_volume2.AddAsLast(volume2);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }
} // library namespace
