global device ML_STAR ("AT_TestLayout.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
#include "AT_TestLayout.res"
 namespace _Method { #include "HSL Sias Centrifuge\\HSLSiasCentrifuge.hsl" }
 namespace _Method { #include "HSL Sias Centrifuge\\SiasCentrifuge.hs_" }
variable loopCounter1;
variable FG;
variable loopCounter2;
variable loopCounter3;
dialog dialogHandle1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    SIASCENTRIFUGE::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if(0){
      FG = 4;
      {
        loopCounter2 = 0;
        while (FG >= 2)
        {
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          FG = FG - 2;
        }
      }
    }
    if(0){
      {
        for(loopCounter1 = 0; loopCounter1 < 12;)
        {
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
    }
    if(0){
      {
        for(loopCounter3 = 0; loopCounter3 < 4;)
        {
          loopCounter3 = loopCounter3 + 1;
          ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
          ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        }
      }
    }
    if(0){
      HSLHamHeaterShaker::CreateUsbDevice(1, 1);
      HSLHamHeaterShaker::CreateUsbDevice(2, 2);
      HSLHamHeaterShaker::StartAllShakerTimed(800, 10);
      HSLHamHeaterShaker::WaitForShaker(1);
      HSLHamHeaterShaker::WaitForShaker(2);
      HSLHamHeaterShaker::StopShaker(1);
      HSLHamHeaterShaker::StopShaker(2);
      HSLHamHeaterShaker::Terminate();
    }
    SIASCENTRIFUGE::SetSimulationMode(0);
    SIASCENTRIFUGE::Initialize(121, Translate("1MBit"), 0);
    SIASCENTRIFUGE::CloseDoor(121, 0);
    if(0){
      SIASCENTRIFUGE::MoveToPosition(121, 1, 0);
      dialogHandle1.SetOutput(Translate("Next?"));
      dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      SIASCENTRIFUGE::MoveToPosition(121, 1, 0);
    }
    if(0){
      ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
      ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
      ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
      ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
    }
    SIASCENTRIFUGE::_ExitLibrary();
  } }
