#include "Library Demo Methods\\Hamilton Tilt Clamp Module Demo.res"
global device ML_STAR ("Library Demo Methods\\Hamilton Tilt Clamp Module Demo.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
variable HHS1;
variable HHS2;
timer timer1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    HSLHamHeaterShaker::CreateUsbDevice(1, HHS1);
    HSLHamHeaterShaker::CreateUsbDevice(2, HHS2);
    HSLHamHeaterShaker::StartShaker(HHS1, 200);
    HSLHamHeaterShaker::StartShaker(HHS2, 200);
    if( 0 == timer1.SetTimer(30) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    HSLHamHeaterShaker::StopShaker(HHS1);
    HSLHamHeaterShaker::StopShaker(HHS2);
    HSLHamHeaterShaker::Terminate();
  } }
