#include "AT_TestLayout.res"
global device ML_STAR ("AT_TestLayout.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Hamilton\\HSLHamiltonMediaFillModule.hsl" }
 namespace _Method { #include "Hamilton MultiDaisyChainedTiltModuleAmbient\\HSLMultiDaisyChainedTiltModuleAmbient.hsl" }
variable InstID;
variable AT_PPump2Dir;
variable AT_PPump1Dir;
variable AT_PumpFillTimeout;
variable AT_PumpFillSpeed;
variable loopCounter1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if(0){
      AT_PumpFillSpeed = 60;
      AT_PumpFillTimeout = 5;
      HSLHamiltonMediaFillModule::Initialize(5, 0, InstID);
      HSLHamiltonMediaFillModule::FillTrough(InstID, 1, AT_PumpFillSpeed, AT_PumpFillTimeout);
      HSLHamiltonMediaFillModule::FillTrough(InstID, 2, AT_PumpFillSpeed, AT_PumpFillTimeout);
      HSLHamiltonMediaFillModule::WaitForPump(InstID, 1);
      HSLHamiltonMediaFillModule::WaitForPump(InstID, 2);
      AT_PPump1Dir = -1;
      AT_PPump2Dir = -1;
      HSLHamiltonMediaFillModule::GetPumpDirection(InstID, 1, AT_PPump1Dir);
      if (AT_PPump1Dir < 1)
      {
        AT_PPump1Dir = 1;
      }
      else
      {
        AT_PPump1Dir = 0;
      }
      HSLHamiltonMediaFillModule::SetPumpDirection(InstID, 1, AT_PPump1Dir);
      HSLHamiltonMediaFillModule::GetPumpDirection(InstID, 2, AT_PPump2Dir);
      if (AT_PPump2Dir < 1)
      {
        AT_PPump2Dir = 1;
      }
      else
      {
        AT_PPump2Dir = 0;
      }
      HSLHamiltonMediaFillModule::SetPumpDirection(InstID, 2, AT_PPump2Dir);
      HSLHamiltonMediaFillModule::FillTrough(InstID, 1, AT_PumpFillSpeed, AT_PumpFillTimeout);
      HSLHamiltonMediaFillModule::FillTrough(InstID, 2, AT_PumpFillSpeed, AT_PumpFillTimeout);
      HSLHamiltonMediaFillModule::WaitForPump(InstID, 1);
      HSLHamiltonMediaFillModule::WaitForPump(InstID, 2);
      HSLHamiltonMediaFillModule::Disconnect(InstID);
    }
    HSLMultiDaisyChainedTiltModuleAmbient::InitializeCommunication(1, 4, 0, 0);
    HSLMultiDaisyChainedTiltModuleAmbient::InitializeTiltModuleAmbient(1, Translate("T1"));
    HSLMultiDaisyChainedTiltModuleAmbient::InitializeTiltModuleAmbient(1, Translate("T2"));
    HSLMultiDaisyChainedTiltModuleAmbient::MoveToPosition(1, Translate("T1"), 5);
    HSLMultiDaisyChainedTiltModuleAmbient::MoveToPosition(1, Translate("T2"), 10);
    HSLMultiDaisyChainedTiltModuleAmbient::TerminateTiltModuleAmbient(1, Translate("T1"));
    HSLMultiDaisyChainedTiltModuleAmbient::TerminateTiltModuleAmbient(1, Translate("T2"));
    if(0){
      ML_STAR.MlStar300ulStandardVolumeTip.SetCount(48);
      {
        loopCounter1 = 0;
        while (
           (ML_STAR.MlStar300ulStandardVolumeTip.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTip, 1);
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.MlStar300ulStandardVolumeTip.GetCurrentPosition() > 0 && ML_STAR.MlStar300ulStandardVolumeTip.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.MlStar300ulStandardVolumeTip.SetMax(ML_STAR.MlStar300ulStandardVolumeTip.GetTotal());
        ML_STAR.MlStar300ulStandardVolumeTip.SetCurrentPosition(1);
      }
    }
  } }
