namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
namespace _Method { #include "HSLStrLib.hsl" }
dialog dialogHandle1;
variable usedTest;
variable dlgRetVal;
variable initNodes;
dialog dialogHandle2;
dialog dialogHandle_1;
dialog dialogHandle_2;
global device ML_STAR ("TempSysDeck*1", "ML_STAR", hslTrue);
dialog dialogHandle_3;
variable initNodesLength;
variable funcRet;
variable hhs1;
variable hhs2;
variable firmwVers;
variable serNumber;
dialog dialogHandle3;
dialog dialogHandle4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    ::RegisterAbortHandler( "OnAbort");
    Trace("Check HamHeaterShaker functionalty");
    hhs1 = 0;
    hhs2 = 0;
    dialogHandle1.SetInputSize(6);
    dialogHandle1.SetInputField(0, "USB Node 1", hslInteger, 1, 1, 1);
    dialogHandle1.SetInputField(1, "ML_STAR 1", hslInteger, 2, 2, 2);
    dialogHandle1.SetInputField(2, "USB Node 1 and 2", hslInteger, 3, 3, 3);
    dialogHandle1.SetInputField(3, "ML_STAR 1 and 2", hslInteger, 4, 4, 4);
    dialogHandle1.SetInputField(4, "ML_STAR 1 and USB 1", hslInteger, 5, 5, 5);
    dialogHandle1.SetInputField(5, "Insert Test nr:", hslInteger, 0, 0, 5);
    dlgRetVal = dialogHandle1.ShowInput("Select the used Test", hslInfinite);
    usedTest = dialogHandle1.GetInputField(0);
    usedTest = dialogHandle1.GetInputField(1);
    usedTest = dialogHandle1.GetInputField(2);
    usedTest = dialogHandle1.GetInputField(3);
    usedTest = dialogHandle1.GetInputField(4);
    usedTest = dialogHandle1.GetInputField(5);
    if (usedTest == 0)
    {
      abort;
    }
    if (usedTest == 1)
    {
      Trace("USB 1");
      funcRet = HSLHamHeaterShaker::CreateUsbDevice(1, hhs1);
      if (funcRet != 0)
      {
        Trace("Function CreateUsbDevice() failed");
        abort;
      }
    }
    if (usedTest == 2)
    {
      Trace("ML_STAR 1");
      funcRet = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, hhs1);
      if (funcRet != 0)
      {
        Trace("Function CreateStarDevice() failed");
        abort;
      }
    }
    if (usedTest == 3)
    {
      Trace("USB 1 and USB 2");
      funcRet = HSLHamHeaterShaker::CreateUsbDevice(1, hhs1);
      if (funcRet != 0)
      {
        Trace("Function CreateUsbDevice() failed");
        abort;
      }
      funcRet = HSLHamHeaterShaker::CreateUsbDevice(2, hhs2);
      if (funcRet != 0)
      {
        Trace("Function CreateUsbDevice() failed");
        abort;
      }
    }
    if (usedTest == 4)
    {
      Trace("ML_STAR 1 and ML_STAR 2");
      funcRet = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, hhs1);
      if (funcRet != 0)
      {
        Trace("Function CreateStarDevice() failed");
        abort;
      }
      funcRet = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 2, hhs2);
      if (funcRet != 0)
      {
        Trace("Function CreateStarDevice() failed");
        abort;
      }
    }
    if (usedTest == 5)
    {
      Trace("ML_STAR 1 and USB 1");
      funcRet = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, hhs1);
      if (funcRet != 0)
      {
        Trace("Function CreateStarDevice() failed");
        abort;
      }
      funcRet = HSLHamHeaterShaker::CreateUsbDevice(1, hhs2);
      if (funcRet != 0)
      {
        Trace("Function CreateUsbDevice() failed");
        abort;
      }
    }
    HSLHamHeaterShaker::SetSimulation(0);
    HSLHamHeaterShaker::GetFirmwareVersion(hhs1, firmwVers);
    dialogHandle3.SetOutput("Version: ", firmwVers);
    dialogHandle3.ShowOutput("Firmware version", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    HSLHamHeaterShaker::GetSerialNumber(hhs1, serNumber);
    dialogHandle4.SetOutput("Serie number: ", serNumber);
    dialogHandle4.ShowOutput("Serial number", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    Trace("Start all heater shaker witout time out");
    HSLHamHeaterShaker::StartAllShaker(1000);
    dialogHandle2.SetOutput("All schaker are schaking in direction left.....", "\nPress OK to stop shaker");
    dialogHandle2.ShowOutput("User Information", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
    HSLHamHeaterShaker::StopAllShaker();
    Trace("Set different shaking parameter for shaker 1 and 2");
    SetShakingParam();
    Trace("Start all shaker witht time out 30");
    dialogHandle_3.SetOutput("All schaker will be start with timeout (30 sec.).", "\nAll  shaker will schaking in direction right.", "\nSome shaker will be shaking fast", "\nSome shaker will be shaking slow", "\nPress OK for start shaking");
    dialogHandle_3.ShowOutput("User Information", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
    HSLHamHeaterShaker::StartAllShakerTimed(1500, 30);
    WaitShakingEnds();
    Trace("Set plate locked");
    PlateLock(1);
    dialogHandle_1.SetOutput("All plate lock are locked");
    dialogHandle_1.ShowOutput("User Information", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
    PlateLock(0);
    dialogHandle_2.SetOutput("All plate lock are unlocked");
    dialogHandle_2.ShowOutput("User Information", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
    Trace("Start temperature without wait to 35.2 °C");
    StartTemp();
    Trace("Wait for temperature is reached");
    WaitTemp();
    Trace("Read temperature");
    GetTemp();
    StopTemp();
    HSLHamHeaterShaker::Terminate();
  } }
