private function SetShakingParam(  ) void ;
private function WaitShakingEnds(  ) void ;
function OnAbort(  ) void ;
private function StopTemp(  ) void ;
private function StartTemp(  ) void ;
private function WaitTemp(  ) void ;
private function PlateLock( variable lockFl ) void ;
private function GetTemp(  ) void ;

function OnAbort(  ) void {
}

private function SetShakingParam(  ) void {
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::SetShakerParameter(hhs1, 1, 1250);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::SetShakerParameter(hhs2, 1, 1000);
  }
}

private function WaitShakingEnds(  ) void {
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::WaitForShaker(hhs1);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::WaitForShaker(hhs2);
  }
}

private function PlateLock( variable lockFl ) void {
  private variable curChar;
  private variable useMlStar;
  private variable usedNode;
  private variable loopCounter1;
  private variable strIndex;
  strIndex = 0;
  useMlStar = 1;
  usedNode = 0;
  {
    for(loopCounter1 = 0; loopCounter1 < initNodesLength;)
    {
      loopCounter1 = loopCounter1 + 1;
      curChar = StrMid(initNodes, strIndex, 1);
      strIndex = strIndex + 1;
      if (strIndex == 3)
      {
        useMlStar = 0;
        usedNode = 0;
      }
      usedNode = usedNode + 1;
      if (curChar == "1")
      {
        HSLHamHeaterShaker::SetPlateLock(hhs1, lockFl);
      }
    }
  }
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::SetPlateLock(hhs1, lockFl);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::SetPlateLock(hhs2, lockFl);
  }
}

private function StartTemp(  ) void {
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::StartTempCtrl(hhs1, 35.2, 0);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::StartTempCtrl(hhs2, 35.2, 0);
  }
}

private function StopTemp(  ) void {
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::StopTempCtrl(hhs1);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::StopTempCtrl(hhs2);
  }
}

private function GetTemp(  ) void {
  private variable curTemp;
  private dialog dialogHandle_1;
  private dialog dialogHandle_2;
  if (hhs1 > 0)
  {
    curTemp = 0;
    HSLHamHeaterShaker::GetTemperature(hhs1, curTemp);
    dialogHandle_1.SetOutput("Shkaer on ML_STAR / USB : ", "\nCurrent temperature : ", curTemp, "\nNeeded temperature 35.2 °C ± 2.0 °C");
    dialogHandle_1.ShowOutput("User Information", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
  }
  if (hhs2 > 0)
  {
    curTemp = 0;
    HSLHamHeaterShaker::GetTemperature(hhs2, curTemp);
    dialogHandle_2.SetOutput("Shkaer on ML_STAR / USB : ", "\nCurrent temperature : ", curTemp, "\nNeeded temperature 35.2 °C ± 2.0 °C");
    dialogHandle_2.ShowOutput("User Information", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function WaitTemp(  ) void {
  if (hhs1 > 0)
  {
    HSLHamHeaterShaker::WaitForTempCtrl(hhs1);
  }
  if (hhs2 > 0)
  {
    HSLHamHeaterShaker::WaitForTempCtrl(hhs2);
  }
}
