 namespace _Method { #include "Hamilton DriverTools\\Hamilton DriverTools.hsl" }
#include "Hamilton Tilt Clamp Module Demo.res"
 namespace _Method { #include "Hamilton Tilt Clamp Module\\Hamilton Tilt Clamp Module.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
variable _strMethodName;
global device ML_STAR ("Hamilton Tilt Clamp Module Demo.lay", "ML_STAR", hslTrue);
variable _arrIntDeviceIDs[];
variable intAngle;
variable intSpeed;
dialog customDialog_1;
dialog customDialog_2;
variable intCycles;
variable intSwayAngle;
variable intEndAngle;
variable intStartAngle;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable intDialogReturn;
    private variable blnSuccess;
    private variable intActualPort;
    private variable blnSimulationMode;
    private variable blnCommunicationTrace;
    private variable intSelectedIndex;
    private variable arrintPortNumbers[];
    private variable strModuleName;
    private variable intTraceLevel;
    private variable strButtonText;
    private dialog customDialog_3;
    private dialog customDialog_4;
    private variable blnOpenClamp;
    private variable blnGoOnEnabled;
    private variable intDeviceID;
    private variable blnCloseClamp;
    private variable strDialogTitle;
    private variable blnSway;
    private variable blnTilt;
    ::RegisterAbortHandler( "OnAbort");
    _strMethodName = GetMethodFileName();
    blnSuccess = Hamilton_DriverTools::GetAvailablePortNumbers("Initialize variables", _strMethodName, arrintPortNumbers);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      {
        for(intActualPort = 0; intActualPort < 256;)
        {
          intActualPort = intActualPort + 1;
          arrintPortNumbers.AddAsLast(intActualPort);
        }
      }
    }
    arrintPortNumbers.InsertElementAt(0, 0);
    arrintPortNumbers.InsertElementAt(0, -1);
    strButtonText = "SELECT Ø";
    intSpeed = 5;
    intAngle = 5;
    strDialogTitle = "Hamilton Clamp Tilt Module Demo";
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        customDialog_4.InitCustomDialog("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");
        customDialog_4.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrintPortNumbers );
        customDialog_4.SetCustomDialogProperty( "Title", strDialogTitle );
        customDialog_4.SetCustomDialogProperty( "btnCustomDialogGoOn.IsEnabled", blnGoOnEnabled );
        customDialog_4.ShowCustomDialog();
        intDialogReturn = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
        blnSimulationMode = customDialog_4.GetCustomDialogProperty( "checkBox1.IsChecked" );
        strModuleName = customDialog_4.GetCustomDialogProperty( "textBox2.Text" );
        intTraceLevel = customDialog_4.GetCustomDialogProperty( "numeric1.Value" );
        intSelectedIndex = customDialog_4.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
        blnCommunicationTrace = customDialog_4.GetCustomDialogProperty( "checkBox3.IsChecked" );
        if(0){
          TrcTrace(Translate("Port"), arrintPortNumbers.ElementAt( intSelectedIndex -1));
          TrcTrace(Translate("strModuleName"), strModuleName);
        }
        _HandleDialogResult(intDialogReturn, "Initialize");
        if (intDialogReturn == ASWGLOBAL::DIALOG::IGNORE)
        {
          break;
        }
        blnSuccess = Hamilton_Tilt_Clamp_Module::Initialize(arrintPortNumbers.ElementAt( intSelectedIndex -1), strModuleName, blnSimulationMode, blnCommunicationTrace, intDeviceID);
        _HandleFunctionSuccess(blnSuccess, "Initialize");
        _arrIntDeviceIDs.AddAsLast(intDeviceID);
        blnSuccess = Hamilton_Tilt_Clamp_Module::SetTraceLevel(intDeviceID, intTraceLevel);
        _HandleFunctionSuccess(blnSuccess, "SetTraceLevel");
        blnGoOnEnabled = ASWGLOBAL::BOOL::TRUE;
      }
    }
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        customDialog_3.InitCustomDialog("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");
        customDialog_3.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", _arrIntDeviceIDs );
        customDialog_3.SetCustomDialogProperty( "Title", strDialogTitle );
        customDialog_3.SetCustomDialogProperty( "btnCustomDialogGoOn.IsEnabled", blnGoOnEnabled );
        customDialog_3.ShowCustomDialog();
        intDialogReturn = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
        intSelectedIndex = customDialog_3.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
        blnOpenClamp = customDialog_3.GetCustomDialogProperty( "radioButton2.IsChecked" );
        blnCloseClamp = customDialog_3.GetCustomDialogProperty( "radioButton3.IsChecked" );
        blnTilt = customDialog_3.GetCustomDialogProperty( "radioButton4.IsChecked" );
        blnSway = customDialog_3.GetCustomDialogProperty( "radioButton5.IsChecked" );
        _HandleDialogResult(intDialogReturn, "Select Task");
        if (intDialogReturn == ASWGLOBAL::DIALOG::IGNORE)
        {
          break;
        }
        intDeviceID = _arrIntDeviceIDs.ElementAt( intSelectedIndex -1);
        if (blnOpenClamp == ASWGLOBAL::BOOL::TRUE)
        {
          blnSuccess = Hamilton_Tilt_Clamp_Module::ClampOpen(intDeviceID);
          _HandleFunctionSuccess(blnSuccess, "ClampOpen");
        }
        if (blnCloseClamp == ASWGLOBAL::BOOL::TRUE)
        {
          blnSuccess = Hamilton_Tilt_Clamp_Module::ClampClose(intDeviceID);
          _HandleFunctionSuccess(blnSuccess, "ClampClose");
        }
        if (blnTilt == ASWGLOBAL::BOOL::TRUE)
        {
          customDialog_1.InitCustomDialog("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");
          customDialog_1.SetCustomDialogProperty( "Title", strDialogTitle );
          customDialog_1.SetCustomDialogProperty( "numeric1.Value", intSpeed );
          customDialog_1.SetCustomDialogProperty( "numeric2.Value", intAngle );
          customDialog_1.SetCustomDialogProperty( "btnCustomDialogGoOn.IsEnabled", blnGoOnEnabled );
          customDialog_1.ShowCustomDialog();
          intDialogReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
          intSpeed = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
          intAngle = customDialog_1.GetCustomDialogProperty( "numeric2.Value" );
          _HandleDialogResult(blnSuccess, Translate("Tilt"));
          if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
          {
            blnSuccess = Hamilton_Tilt_Clamp_Module::Tilt(intDeviceID, intSpeed, intAngle);
            _HandleFunctionSuccess(blnSuccess, "Tilt");
          }
        }
        if (blnSway == ASWGLOBAL::BOOL::TRUE)
        {
          customDialog_2.InitCustomDialog("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");
          customDialog_2.SetCustomDialogProperty( "Title", strDialogTitle );
          customDialog_2.SetCustomDialogProperty( "btnCustomDialogGoOn.IsEnabled", blnGoOnEnabled );
          customDialog_2.ShowCustomDialog();
          intDialogReturn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
          intCycles = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
          intSpeed = customDialog_2.GetCustomDialogProperty( "numeric2.Value" );
          intStartAngle = customDialog_2.GetCustomDialogProperty( "numeric3.Value" );
          intSwayAngle = customDialog_2.GetCustomDialogProperty( "numeric4.Value" );
          intEndAngle = customDialog_2.GetCustomDialogProperty( "numeric5.Value" );
          _HandleDialogResult(blnSuccess, Translate("Sway"));
          if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
          {
            blnSuccess = Hamilton_Tilt_Clamp_Module::Sway(intDeviceID, intCycles, intSpeed, intStartAngle, intSwayAngle, intEndAngle);
            _HandleFunctionSuccess(blnSuccess, "Sway");
          }
        }
      }
    }
    _Terminate();
  } }
