 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "HSL Sias Centrifuge\\SiasCentrifuge.hs_" }
 namespace _Method { #include "HSL Sias Centrifuge\\HSLSiasCentrifugeEnums.hsl" }
variable strModuleName;
variable intReturnValue;
variable intModuleID;
dialog dialogHandle_1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    SIASCENTRIFUGE::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    intModuleID = 121;
    strModuleName = "HolaCentrifuge";
    intReturnValue = 0;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
    intReturnValue = SIASCENTRIFUGE::Initialize(intModuleID, strModuleName, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
    if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
    {
      abort;
    }
    intReturnValue = SIASCENTRIFUGE::MoveToPosition(intModuleID, 3, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
    if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
    {
      abort;
    }
    dialogHandle_1.SetOutput(Translate("Position 3 open. Press ok to continue"));
    dialogHandle_1.ShowOutput(Translate("Sias Centrifuge"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    intReturnValue = SIASCENTRIFUGE::CloseDoor(intModuleID, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
    if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
    {
      abort;
    }
    intReturnValue = SIASCENTRIFUGE::Spin(intModuleID, 60, 1500, 200, HSLSiasCentrifuge::Enums::ErrorRecovery::None);
    if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
    {
      abort;
    }
    SIASCENTRIFUGE::Terminate(intModuleID);
    SIASCENTRIFUGE::_ExitLibrary();
  } }
