 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "load_instructions.hs_" }
 namespace _Method { #include "load_instructions_tracking.hs_" }
#include "Load instructions demo method.res"
variable plate_BC;
variable load_message;
variable plate_name;
variable tips_needed;
variable tube_name_array[];
variable sample_tube_name_array[];
global device ML_STAR ("Load instructions demo method.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOAD_INSTRUCTIONS::_InitLibrary();
    LOAD_INSTRUCTIONS_TRACKING::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("PA = Pipetting Channel\nAA = Save parameter value of parameter @@\nts# = mode for additional shaking for tip discard (0 = off, 1 = on)"));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    MECC::TraceComment(Translate("zp### = PWM limiter Z drive for searching discard position"));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    abort;
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                                                                Example 1 (no tracking)\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    plate_BC = Translate("AB1234");
    load_message = StrConcat4(Translate("Load a 96 well  plate with barcode "), plate_BC, Translate(" in the flashing position"), Translate(""));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Plate_1, load_message);
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                                                                Example 2 (no tracking)\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    LOAD_INSTRUCTIONS::load_instructions_one_seq_pos(ML_STAR, ML_STAR.tube_carrier_24_pos_1, 3, Translate("Load an empty 1.5 ml Eppendorf in the flashing position"));
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                                                                Example 3\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    load_message = Translate("Load a 96 well plate in the flashing position");
    LOAD_INSTRUCTIONS::load_instructions_return_double_checked_plate_name(ML_STAR, ML_STAR.Plate_2, load_message, plate_name);
    TrcTrace(Translate("Returned plate name is "), plate_name);
    LOAD_INSTRUCTIONS_TRACKING::track_plate_name(ML_STAR, ML_STAR.Plate_2, plate_name, 1);
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                                                                Example 4\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    load_message = Translate("Load a 96 well plate in the flashing position");
    LOAD_INSTRUCTIONS::load_instructions_return_double_checked_plate_name_using_password_box(ML_STAR, ML_STAR.Plate_3, load_message, plate_name);
    TrcTrace(Translate("Returned plate name is "), plate_name);
    LOAD_INSTRUCTIONS_TRACKING::track_plate_name(ML_STAR, ML_STAR.Plate_3, plate_name, 0);
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                                                                Example 5\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    load_message = Translate("Load a tube in the flashing position");
    LOAD_INSTRUCTIONS::load_instructions_return_double_checked_tube_name_array(ML_STAR, ML_STAR.tube_carrier_24_pos_1, load_message, tube_name_array);
    Util2::Debug::TraceArray(Translate("Tube name array "), tube_name_array);
    LOAD_INSTRUCTIONS_TRACKING::track_tube_names(ML_STAR, ML_STAR.tube_carrier_24_pos_1, tube_name_array);
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                                                                Example 6\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    load_message = Translate("Load a tube in the flashing position");
    LOAD_INSTRUCTIONS::load_instructions_return_double_checked_tube_name_array_using_password_box(ML_STAR, ML_STAR.tube_carrier_24_pos_1, load_message, tube_name_array);
    Util2::Debug::TraceArray(Translate("Tube name array "), tube_name_array);
    LOAD_INSTRUCTIONS_TRACKING::track_tube_names(ML_STAR, ML_STAR.tube_carrier_24_pos_1, tube_name_array);
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                                                                Example 7 (no tracking)\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    tips_needed = 96;
    LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.MlStar50ulTip, 50, tips_needed, Translate("50ultipcounter"), 0);
    LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 300, tips_needed, Translate("300ulfiltertipcounter"), 1);
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                                                                Example 8\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    sample_tube_name_array.SetSize(0);
    sample_tube_name_array.AddAsLast(Translate("Sample 1"));
    sample_tube_name_array.AddAsLast(Translate("Sample 2"));
    sample_tube_name_array.AddAsLast(Translate("Sample 3"));
    sample_tube_name_array.AddAsLast(Translate("Sample 4"));
    LOAD_INSTRUCTIONS::load_instructions_tube_IDs_from_array(ML_STAR, ML_STAR.tube_carrier_24_pos_1, sample_tube_name_array);
    LOAD_INSTRUCTIONS_TRACKING::track_tube_names(ML_STAR, ML_STAR.tube_carrier_24_pos_1, sample_tube_name_array);
    LOAD_INSTRUCTIONS::_ExitLibrary();
    LOAD_INSTRUCTIONS_TRACKING::_ExitLibrary();
  } }
