private function SiasCentrifuge(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog dialogHandle_1;
  private dialog dialogHandle_2;
  private dialog dialogHandle_3;
  if (intReturnValueSpinLoaded != HSLSiasCentrifuge::Enums::ErrorCode::None)
  {
    dialogHandle_2.SetOutput(Translate("The centrifuge could not spin with the requested speed"), "\n", Translate(""), "\n", Translate("Check the weight unbalance of the labware and the stability of the workbench"), "\n");
    dialogHandle_2.ShowOutput(Translate("Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (buckets_loaded == 1)
  {
    intReturnValue = SIASCENTRIFUGE::MoveToPosition(intModuleID, pos1, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
    dialogHandle_1.SetOutput(Translate("Please remove the labware from Position A"), "\n", Translate("ATTENTION. The lid will close."));
    dialogHandle_1.ShowOutput(Translate("Remove labware"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    intReturnValue = SIASCENTRIFUGE::MoveToPosition(intModuleID, pos2, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
    dialogHandle_3.SetOutput(Translate("Remove the labware from Position B"), "\n", Translate("ATTENTION. The lid will close."));
    dialogHandle_3.ShowOutput(Translate("Remove labware"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  SIASCENTRIFUGE::Terminate(intModuleID);
}

private function SiasCentrifuge(  ) void {
  private dialog dialogHandle_4;
  private dialog dialogHandle_5;
  private dialog dialogHandle_6;
  private dialog dialogHandle_7;
  private dialog dialogHandle_8;
  private dialog dialogHandle_9;
  private dialog dialogHandle_10;
  private dialog dialogHandle_11;
  private dialog dialogHandle_12;
  private dialog dialogHandle_13;
  private dialog dialogHandle_14;
  private dialog dialogHandle_15;
  private dialog dialogHandle_16;
  private dialog dialogHandle_17;
  private dialog dialogHandle_18;
  private dialog dialogHandle_19;
  private dialog dialogHandle_20;
  private dialog dialogHandle_21;
  private dialog dialogHandle_22;
  private dialog dialogHandle_23;
  private dialog dialogHandle_24;
  pos1 = 1;
  pos2 = 11;
  intModuleID = 121;
  strModuleName = "HolaCentrifuge";
  intReturnValue = 0;
  intReturnValueSpinLoaded = 0;
  Simulation_mode = 0;
  given_speed = 1000;
  buckets_loaded = 0;
  if(0){
    HSLSiasCentrifuge::SetSimulationMode(Simulation_mode);
  }
  dialogHandle_8.SetOutput(Translate("The centrifuge will be initialized!"));
  dialogHandle_8.ShowOutput(Translate("Initialize"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  intReturnValue = SIASCENTRIFUGE::Initialize(intModuleID, strModuleName, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
  if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
  {
    dialogHandle_9.SetOutput(Translate("The centrifuge could not be initialized, check the USB cable and the CAN configuration"));
    dialogHandle_9.ShowOutput(Translate("Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    abort;
  }
  dialogHandle_5.SetOutput(Translate("The initialization and communication test was successfully performed!"));
  dialogHandle_5.ShowOutput(Translate("Init test"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  dialogHandle_16.SetOutput(Translate("Positioning Test "), "\n", Translate(""), "\n", Translate("The centrifuge will open with the rotor on position  A "), "\n");
  dialogHandle_16.ShowOutput(Translate("Move to Position 1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  intReturnValue = SIASCENTRIFUGE::MoveToPosition(intModuleID, pos1, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
  if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
  {
    abort;
    dialogHandle_6.SetOutput(Translate("The centrifuge could not perform the requested action. The method will be aborted!"));
    dialogHandle_6.ShowOutput(Translate("Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  else
  {
    dialogHandle_19.SetOutput(Translate("-Verify that the long side of the bucket is perfectly parallel with the long side of the opening"), "\n", Translate(""), "\n", Translate("-Gently swing the bucket and verify that it returns to the horizontal position"), "\n", Translate(""), "\n", Translate("-Press OK when finish. "), "\n");
    dialogHandle_19.ShowOutput(Translate("Check bucket"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  dialogHandle_22.SetOutput(Translate("The centrifuge will open with the rotor on position B"), "\n", Translate(""), "\n", Translate("ATTENTION. The lid will close."), "\n");
  dialogHandle_22.ShowOutput(Translate("Move to Position 2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  intReturnValue = SIASCENTRIFUGE::MoveToPosition(intModuleID, pos2, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
  if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
  {
    abort;
    dialogHandle_11.SetOutput(Translate("The centrifuge could not perform the requested action. The method will be aborted!"));
    dialogHandle_11.ShowOutput(Translate("Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  else
  {
    dialogHandle_21.SetOutput(Translate("-Verify that the long side of the bucket is perfectly parallel with the long side of the opening"), "\n", Translate(""), "\n", Translate("-Gently swing the bucket and verify that it returns to the horizontal position"), "\n", Translate(""), "\n", Translate("-Press OK when finished. "), "\n");
    dialogHandle_21.ShowOutput(Translate("Check bucket"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  dialogHandle_10.SetOutput(Translate("The positioning test was successfully performed!"));
  dialogHandle_10.ShowOutput(Translate("Positioning test"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  dialogHandle_14.SetOutput(Translate("Rotor Test"), "\n", Translate(""), "\n", Translate("Manually spin the rotor  360° and verify that it moves smoothly"), "\n", Translate(""), "\n", Translate("Press OK when finished"), "\n");
  dialogHandle_14.ShowOutput(Translate("Check the rotor"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  intReturnValue = SIASCENTRIFUGE::Initialize(intModuleID, strModuleName, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
  dialogHandle_20.SetOutput(Translate("The rotor test was successfully performed!"));
  dialogHandle_20.ShowOutput(Translate("Rotor test"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  intReturnValue = SIASCENTRIFUGE::MoveToPosition(intModuleID, pos1, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
  dialogHandle_24.SetOutput(Translate("Spin Test"), "\n", Translate(""), "\n", Translate("Prepare 2 identical Labwares (Plates, tube racks) that will be used by the customer."), "\n", Translate("The 2 Labwares must be of the same weight (maximally allowded difference =  6 grams)"), "\n", Translate(""), "\n", Translate("Place one Labware into the Centrifuge Bucket! "), "\n", Translate(""), "\n", Translate("Click OK when finished"), "\n", Translate(""), "\n", Translate("ATTENTION. The lid will close."), "\n");
  dialogHandle_24.ShowOutput(Translate("Spin test"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  intReturnValue = SIASCENTRIFUGE::MoveToPosition(intModuleID, pos2, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
  dialogHandle_17.SetOutput(Translate("Place the second Labware into the Centrifuge Bucket!"), "\n", Translate(""), "\n", Translate("Click OK when finished"), "\n", Translate(""), "\n", Translate("ATTENTION. The lid will close."), "\n");
  dialogHandle_17.ShowOutput(Translate("Spin test"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  given_speed = 1000;
  buckets_loaded = 1;
  {
    for(loopCounter1 = 0; loopCounter1 < 4;)
    {
      loopCounter1 = loopCounter1 + 1;
      intReturnValueSpinLoaded = SIASCENTRIFUGE::Spin(intModuleID, 60, given_speed, 100, HSLSiasCentrifuge::Enums::ErrorRecovery::None);
      if (intReturnValueSpinLoaded != HSLSiasCentrifuge::Enums::ErrorCode::None)
      {
        abort;
      }
      else
      {
        TempVar = given_speed;
        StrIStr(TempVar);
        dialogHandle_18.SetOutput(Translate("The test with "), TempVar, Translate(" RPM was successfully performed"));
        dialogHandle_18.ShowOutput(Translate("Success"), hslOKOnly | hslInformation | hslDefButton1, 2);
      }
      given_speed = given_speed + 1000;
    }
  }
  dialogHandle_12.SetOutput(Translate("The spin test was successfully performed!"));
  dialogHandle_12.ShowOutput(Translate("Spin test"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  intReturnValue = SIASCENTRIFUGE::MoveToPosition(intModuleID, pos1, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
  if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
  {
    abort;
    dialogHandle_7.SetOutput(Translate("The centrifuge could not perform the requested action. The method will be aborted!"));
    dialogHandle_7.ShowOutput(Translate("Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  dialogHandle_13.SetOutput(Translate("Please remove the Labware from position  A"), "\n", Translate(""), "\n", Translate("ATTENTION. The lid will close."), "\n");
  dialogHandle_13.ShowOutput(Translate("Remove labware"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  intReturnValue = SIASCENTRIFUGE::MoveToPosition(intModuleID, pos2, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
  if (intReturnValue != HSLSiasCentrifuge::Enums::ErrorCode::None)
  {
    abort;
    dialogHandle_4.SetOutput(Translate("The centrifuge could not perform the requested action. The method will be aborted!"));
    dialogHandle_4.ShowOutput(Translate("Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  dialogHandle_23.SetOutput(Translate("Remove the labware from position B"), "\n", Translate(""), "\n", Translate("ATTENTION. The lid will close."), "\n");
  dialogHandle_23.ShowOutput(Translate("Remove labware"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  SIASCENTRIFUGE::Terminate(intModuleID);
  dialogHandle_15.SetOutput(Translate("Congratulations!"), "\n", Translate(""), "\n", Translate("The centrifuge has passed the OQ test"), "\n");
  dialogHandle_15.ShowOutput(Translate("End of OQ"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
}
