#include "STARplus_TestBed.res"
 namespace _Method { #include "WSI\\VariColumn_96Head.hs_" }
global device ML_STAR ("STARplus_TestBed.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VARICOLUMN_96HEAD::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    VARICOLUMN_96HEAD::Load_GUI(3, 1);
    VARICOLUMN_96HEAD::Tip_PickUp_Column(ML_STAR, ML_STAR.Core96_TipSupport_ST_L_0001, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    VARICOLUMN_96HEAD::PipettingOffset();
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
    VARICOLUMN_96HEAD::PipettingOffset();
    VARICOLUMN_96HEAD::Tip_Eject_Column(ML_STAR, 2);
    VARICOLUMN_96HEAD::_ExitLibrary();
  } }
