private function A_MethodInit( variable intTraceLevel ) void ;
private function B_GetWorklist( variable intTimeToWait, variable _intRequestCount ) variable ;
private function C_CreateSeq(  ) void ;
private function D_LoadInstructions(  ) void ;
private function E_PipettingSteps(  ) void ;
private function F_EndOfRequest( variable _intRequestCount ) void ;
private function PIP_BulkMediaTransfers( variable _strEventDetails, variable _strSourceLocation, variable _strDestinationLocation, variable _intTotalVolume ) void ;
private function Trp_DeckTransport( variable _strCurrentStep_Details, variable _blnToolEject, variable _intCheckPlate, variable & _blnFirstTransfer, variable _blnCore ) variable ;
private function _PlateDefinitions( sequence & _seq, variable & _arr[] ) void ;
private function _TRP_CORE( sequence & _seqSource, sequence & _seqDestination, variable _intSeqMaxTransfers, variable _blnToolEject, variable _strSourceLocation, variable _strDestinationLocation, variable & _blnFirstTransfer ) variable ;
private function _TRP_Iswap( sequence & _seqSource, sequence & _seqDestination, variable _intSeqMaxTransfers, variable _blnToolEject, variable _strSourceLocation, variable _strDestinationLocation, variable & _blnFirstTransfer ) variable ;
private function __GetPlateBarcode( sequence & seq, variable _blnTool, variable _intAcceleration ) variable ;
private function __VersionControl(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private timer tmr;
  if(0){
    AswStatusDialog::Terminate();
  }
  SCAP_STARPLUS::Disconnect();
  if(0){
    UV_STARPLUS::Lights(0, tmr, ML_STAR);
  }
}

private function A_MethodInit( variable intTraceLevel ) void {
  private variable rtnValue;
  private variable strUserEmail; // Pulled from the DB. Generated by IdentifyCurrentUser in A_MethodInit
  private variable intFanSpeed; // Pulled from the JSON, used to set the SCAP fan speed
  private timer tmrHepaFan; // Timer associated with how long the HEPA filters have been running
  private variable rtnSuccess;
  private variable blnSCAPTraceLevel;
  private variable intTiltComport;
  private variable intKennyComport;
  private variable intKennyTimeout;
  private variable intSCAPComport1;
  private variable intSCAPComport2;
  private variable strMessage;
  private variable blnSuccess;
  private variable blnVisible;
  private variable strSwipeCard;
  private variable loopCounter1;
  private variable strWarning;
  private dialog customDialog_1;
  private variable arrConfigFilePaths[];
  private variable strSQLStatement;
  private variable intAttemptsLeft;
  private variable filStrSwipeCard;
  private file hndAccessDB;
  private variable intMaxAttempts;
  private dialog customDialog_2;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                         Method Initialisation - Start\n\n******************************************************************************************************************************************************"));
  TRACELEVEL::SetTraceLevel(intTraceLevel);
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate(" \/ "));
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::PROGRESS, Translate(" = "));
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE, Translate(" ^ "));
  if (intTraceLevel == TRACE_LEVEL_DEBUG)
  {
    blnSCAPTraceLevel = 1;
  }
  else
  {
    blnSCAPTraceLevel = 0;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> Successfully set traces levels"), Translate(""));
  blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  strMessage = StrConcat4(Translate("Instrument is in "), strTesting, Translate(" mode"), Translate(""));
  SANGERGENERAL::StatusDisplay_Update(strMessage, Translate(""), 0);
  if (blnAdmin == 0)
  {
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    if (rtnValue == 2)
    {
      MECC::TraceComment(Translate("User has decided to abort the method"));
      abort;
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Instrument Mode:: "), blnSimMode);
  rtnSuccess = SANGERGENERAL::StatusDisplay_Init(blnSCAPTraceLevel);
  if (rtnSuccess == 0)
  {
    abort;
  }
  intMaxAttempts = 3;
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogProperty( "textBlock3.Text", strWarning );
      customDialog_2.SetCustomDialogProperty( "textBlock3.IsVisible", blnVisible );
      customDialog_2.SetCustomDialogProperty( "textBlock4.IsVisible", blnAdmin );
      customDialog_2.ShowCustomDialog();
      rtnValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      strSwipeCard = customDialog_2.GetCustomDialogProperty( "textBox1.Text" );
      if (rtnValue == 2)
      {
        MECC::TraceComment(Translate("User exited custom dialog"));
        abort;
      }
      rtnSuccess = FINDDBPATH::GetFilePaths(arrConfigFilePaths, 1);
      strSQLStatement = StrConcat8(Translate("SELECT * FROM"), Translate(" [Users] "), Translate("WHERE"), Translate(" [SwipeCard] = '"), strSwipeCard, Translate("'"), Translate(""), Translate(""));
      onerror goto errLabel_3 ;
      err.Clear();
      hndAccessDB.AddField("SwipeCard", filStrSwipeCard, hslString, 255);
      hndAccessDB.AddField("PreferredName", strUsersPreferredName, hslString, 255);
      hndAccessDB.AddField("Admin", blnAdmin, hslInteger);
      hndAccessDB.AddField("Email", strUserEmail, hslString, 255);
      if( 0 == hndAccessDB.Open(arrConfigFilePaths.ElementAt( 1 -1) + " " + "Users", hslRead, strSQLStatement) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, arrConfigFilePaths.ElementAt( 1 -1), "HxMetEdCompCmd");
      }
      if( 0 == hndAccessDB.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != hndAccessDB.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      hndAccessDB.RemoveFields();
      break;
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        MECC::TraceComment(Translate("Encountered an error"));
        intAttemptsLeft = intMaxAttempts - loopCounter1;
        blnVisible = 1;
        strWarning = StrConcat4(Translate("Attempts left: "), intAttemptsLeft, Translate(""), Translate(""));
        if (intAttemptsLeft == 0)
        {
          MECC::TraceComment(Translate("User failed to login."));
          abort;
        }
      }   /* end if from skip handler if no error */
      blnAdmin = blnAdmin * -1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>>>> strSwipeCard: "), strSwipeCard);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>>>> strSQLStatement: "), strSQLStatement);
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- User = "), strUsersPreferredName);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- blnAdmin = "), blnAdmin);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- _strUserEmail = "), strUserEmail);
  MECC::TraceComment(Translate("----------- Initialise Hepa Filters -----------"));
  intSCAPComport1 = JSONSEARCH::GetSpecificStringEntry(Translate(""), Translate("starPlusConfig,scapComport1"), intTraceLevel);
  intSCAPComport2 = JSONSEARCH::GetSpecificStringEntry(Translate(""), Translate("starPlusConfig,scapComport2"), intTraceLevel);
  intFanSpeed = JSONSEARCH::GetSpecificStringEntry(Translate(""), Translate("starPlusConfig,fanSpeed"), intTraceLevel);
  SCAP_STARPLUS::Connect(intSCAPComport1, intSCAPComport2, blnSCAPTraceLevel, blnSimMode);
  if (intFanSpeed != 0)
  {
    SCAP_STARPLUS::SetFanSpeed(intFanSpeed);
    SCAP_STARPLUS::SetFanState(1);
  }
  SCAP_STARPLUS::SetLightState(1);
  if( 0 == tmrHepaFan.SetTimer(hslInfinite) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("----- Traces -----"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> SCap COMport1:: "), intSCAPComport1);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> SCap COMport2:: "), intSCAPComport2);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> SCap fan speed:: "), intFanSpeed);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Scaps initialised: "), Translate("Successfully"));
  MECC::TraceComment(Translate("----------- Initialise Tilt Modules -----------"));
  intTiltComport = JSONSEARCH::GetSpecificStringEntry(Translate(""), Translate("starPlusConfig,tiltClampComport"), intTraceLevel);
  blnSuccess = Hamilton_Tilt_Clamp_Module::Initialize(intTiltComport, Translate("C1"), blnSimMode, blnSCAPTraceLevel, devTilt_1);
  Hamilton_Tilt_Clamp_Module::Initialize(intTiltComport, Translate("C2"), blnSimMode, blnSCAPTraceLevel, devTilt_2);
  Hamilton_Tilt_Clamp_Module::SetTraceLevel(devTilt_1, intTraceLevel);
  Hamilton_Tilt_Clamp_Module::SetTraceLevel(devTilt_2, intTraceLevel);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Tilt COMport:: "), intTiltComport);
  MECC::TraceComment(Translate("----------- Initialise Kenny -----------"));
  intKennyComport = JSONSEARCH::GetSpecificStringEntry(Translate(""), Translate("starPlusConfig,kennyComport"), intTraceLevel);
  intKennyTimeout = JSONSEARCH::GetSpecificStringEntry(Translate(""), Translate("starPlusConfig,kennyTimeout"), intTraceLevel);
  rtnSuccess = HSLBarcodeReader::SetSimulation(blnSimMode);
  rtnSuccess = HSLBarcodeReader::SetComPort(intKennyComport);
  rtnSuccess = HSLBarcodeReader::SetTimeout(intKennyTimeout);
  rtnSuccess = HSLBarcodeReader::SetErrorRecovery(2);
  MECC::TraceComment(Translate("----- Traces -----"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> Kenny COMport:: "), intKennyComport);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> Kenny timeout:: "), intKennyTimeout);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Kenny initialised: "), Translate("Successfully"));
  MECC::TraceComment(Translate("----------- Initialise Centrifuge -----------"));
  MECC::TraceComment(Translate("----- Traces -----"));
  MECC::TraceComment(Translate("----------- Initialise Heater Shaker -----------"));
}

private function B_GetWorklist( variable intTimeToWait, variable _intRequestCount ) variable {
  private variable arrPendingRequestFiles[];
  private variable intArrayPendingRequestFiles_Size;
  private timer timer1;
  private variable strActiveRequestFilePath;
  private variable blnSuccess;
  private file hndWorklist;
  private variable arrWorklist_Processes[];
  private variable arrWorklist_DestinationWellVolumes[];
  private variable arrWorklist_Dates[];
  private variable arrWorklist_SourceWellVolumes[];
  private variable strPendingFolderPath;
  private variable hndWorklist_Process;
  private variable hndWorklist_Date;
  private variable hndWorklist_SourceBarcode;
  private variable hndWorklist_DestinationBarcode;
  private variable intNumberOfUniqueProcesses;
  private variable arrProcesses_Unique[];
  private variable strWorklistDate;
  private variable intNumberOfUniqueDates;
  private variable strCurrentDate;
  private variable arrDates_Unique[];
  private variable rtnValue;
  private variable blnError;
  private variable strDate_FolderFormat;
  private variable strArchiveFolderPath;
  private variable intNumberOfPreviousRunsToday;
  private variable arrArchiveFolderPaths[];
  private variable strArchiveFilePath;
  private variable arr[];
  private variable blnPass;
  private variable intNumberOfApprovedProcesses;
  private variable strPossibleProcess;
  private variable arrApprovedProcesses[];
  private variable hndWorklist_SourceWellID;
  private variable strWorklistProcess;
  private variable hndWorklist_DestinationLabwareType;
  private variable hndWorklist_DestinationWellID;
  private variable hndWorklist_SourceLabwareType;
  private variable strWorklistDestinationLabware;
  private variable arrWorklist_DestinationLabwareTypes[];
  private variable arrWorklist_SourceLabwareTypes[];
  private variable loopCounter4;
  private variable loopCounter5;
  private variable loopCounter6;
  private dialog customDialog_4;
  private variable index;
  private variable rtnSuccess;
  private variable intNumberOfPlates;
  private variable strProcessToCreate;
  private file hndFile;
  private variable strPlateType;
  private variable arrWorklistBarcodes_Dest_Unique[];
  private variable arrWorklistBarcodes_Src_Unique[];
  private variable strTemp;
  private variable strBatFile;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Find Pending Request - Start\n\n******************************************************************************************************************************************************"));
  arrPendingRequestFiles.SetSize(0);
  strPendingFolderPath = StrConcat2(strActiveRequestFolderPath, Translate("Pending Files\\"));
  strActiveRequestFilePath = StrConcat2(strActiveRequestFolderPath, Translate("ActiveRequest.csv"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> strPendingFolderPath = "), strPendingFolderPath);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> strActiveRequestFilePath = "), strActiveRequestFilePath);
  index = 0;
  {
    loopCounter5 = 0;
    while (1 == 1)
    {
      loopCounter5 = loopCounter5 + 1;
      FileDirectoryLib::GetFilesInDirectory(strPendingFolderPath, Translate("*.*"), arrPendingRequestFiles);
      intArrayPendingRequestFiles_Size=arrPendingRequestFiles.GetSize();
      if (intArrayPendingRequestFiles_Size > 0)
      {
        if (strTesting == "testing")
        {
          blnSuccess = FileDirectoryLib::CopyFile(arrPendingRequestFiles.ElementAt( 1 -1), strActiveRequestFilePath);
          if (blnSuccess == 1)
          {
            MECC::TraceComment(Translate("CopyFile of HSLFileDirectoryLib had an error"));
            abort;
          }
        }
        else
        {
          blnSuccess = FileDirectoryLib::MoveFile(arrPendingRequestFiles.ElementAt( 1 -1), strActiveRequestFilePath);
          if (blnSuccess == 1)
          {
            MECC::TraceComment(Translate("MoveFile of HSLFileDirectoryLib had an error"));
            abort;
          }
        }
        break;
      }
      else
      {
        index = index + 1;
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::PROGRESS, Translate(""), Translate(""), Translate("Searching for worklist"));
        if( 0 == timer1.SetTimer(intTimeToWait) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (index >= 3)
        {
          customDialog_4.InitCustomDialog("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");
          customDialog_4.ShowCustomDialog();
          rtnValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
          strProcessToCreate = customDialog_4.GetCustomDialogProperty( "comboBox1.Text" );
          intNumberOfPlates = customDialog_4.GetCustomDialogProperty( "numeric1.Value" );
          strPlateType = customDialog_4.GetCustomDialogProperty( "comboBox2.Text" );
          if (rtnValue >= 2)
          {
            return (2);
          }
          hndFile.AddField("Process Type", strProcessToCreate, hslString, 255);
          hndFile.AddField("Number Of Plates", intNumberOfPlates, hslString, 255);
          hndFile.AddField("PlateType", strPlateType, hslString, 255);
          hndFile.SetDelimiter(hslCSVDelimited);
          if( 0 == hndFile.Open("C:\\Program Files (x86)\\HAMILTON\\Methods\\wsi\\Resources\\Dummy.txt", hslWrite) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\Methods\\wsi\\Resources\\Dummy.txt", "HxMetEdCompCmd");
          }
          if( 0 == hndFile.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != hndFile.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          hndFile.RemoveFields();
          strBatFile = Translate("");
          strTemp = GetMethodFileName();
          strTemp = StrLeft(strTemp, StrReverseFind(strTemp, "\\"));
          strBatFile = StrConcat2(strTemp,"\\Resources\\CSVGenerator.bat");
          {
            if( 0 == Shell(strBatFile, hslHide, hslAsynchronous) )
            {
                  MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          index = 0;
        }
      }
    }
  }
  blnError = 0;
  arrWorklist_SourceBarcodes.SetSize(0);
  arrWorklist_DestinationBarcodes.SetSize(0);
  arrWorklist_Dates.SetSize(0);
  arrWorklist_Processes.SetSize(0);
  arrWorklist_SourceWellIDs.SetSize(0);
  arrWorklist_DestinationWellIDs.SetSize(0);
  arrWorklist_SourceLabwareTypes.SetSize(0);
  arrWorklist_DestinationLabwareTypes.SetSize(0);
  hndWorklist.AddField("Source Barcode", hndWorklist_SourceBarcode, hslString, 255);
  hndWorklist.AddField("Source Well ID", hndWorklist_SourceWellID, hslString, 255);
  hndWorklist.AddField("Source Labware ID", hndWorklist_SourceLabwareType, hslString, 255);
  hndWorklist.AddField("Destination Barcode", hndWorklist_DestinationBarcode, hslString, 255);
  hndWorklist.AddField("Destination Well ID", hndWorklist_DestinationWellID, hslString, 255);
  hndWorklist.AddField("Destination Labware ID", hndWorklist_DestinationLabwareType, hslString, 255);
  hndWorklist.AddField("Date", hndWorklist_Date, hslString, 8);
  hndWorklist.AddField("Process", hndWorklist_Process, hslString, 255);
  hndWorklist.SetDelimiter(hslCSVDelimited);
  if( 0 == hndWorklist.Open(strActiveRequestFilePath, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strActiveRequestFilePath, "HxMetEdCompCmd");
  }
  {
    loopCounter6 = 0;
    while (
       (hndWorklist.Eof() == 0)
    )
    {
      loopCounter6 = loopCounter6 + 1;
      if( 0 == hndWorklist.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      rtnSuccess = SANGERGENERAL::WorklistEntryValidation(hndWorklist_Process, 1);
      if (rtnSuccess == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Process"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), loopCounter6);
        break;
      }
      rtnSuccess = SANGERGENERAL::WorklistEntryValidation(hndWorklist_SourceBarcode, 0);
      if (rtnSuccess == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Source Barcode"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), loopCounter6);
        abort;
      }
      rtnSuccess = SANGERGENERAL::WorklistEntryValidation(hndWorklist_DestinationBarcode, 0);
      if (rtnSuccess == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Destination Barcode"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), loopCounter6);
        abort;
      }
      rtnSuccess = SANGERGENERAL::WorklistEntryValidation(hndWorklist_Date, 0);
      if (rtnSuccess == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Date"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), loopCounter6);
        abort;
      }
      rtnSuccess = SANGERGENERAL::WorklistEntryValidation(hndWorklist_SourceWellID, 0);
      if (rtnSuccess == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Source Well ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), loopCounter6);
        abort;
      }
      rtnSuccess = SANGERGENERAL::WorklistEntryValidation(hndWorklist_DestinationWellID, 0);
      if (rtnSuccess == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Destination Well ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), loopCounter6);
        abort;
      }
      rtnSuccess = SANGERGENERAL::WorklistEntryValidation(hndWorklist_SourceLabwareType, 0);
      if (rtnSuccess == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Source Labware ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), loopCounter6);
        abort;
      }
      rtnSuccess = SANGERGENERAL::WorklistEntryValidation(hndWorklist_DestinationLabwareType, 0);
      if (rtnSuccess == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Destination Labware ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), loopCounter6);
        abort;
      }
      StrMakeLower(hndWorklist_Process);
      StrMakeLower(hndWorklist_SourceLabwareType);
      StrMakeLower(hndWorklist_DestinationLabwareType);
      arrWorklist_Processes.AddAsLast(hndWorklist_Process);
      arrWorklist_SourceBarcodes.AddAsLast(hndWorklist_SourceBarcode);
      arrWorklist_DestinationBarcodes.AddAsLast(hndWorklist_DestinationBarcode);
      arrWorklist_Dates.AddAsLast(hndWorklist_Date);
      arrWorklist_SourceWellIDs.AddAsLast(hndWorklist_SourceWellID);
      arrWorklist_DestinationWellIDs.AddAsLast(hndWorklist_DestinationWellID);
      arrWorklist_SourceLabwareTypes.AddAsLast(hndWorklist_SourceLabwareType);
      arrWorklist_DestinationLabwareTypes.AddAsLast(hndWorklist_DestinationLabwareType);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>>>>> Worklist Line Count = "), loopCounter6);
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("----- strWorklistProcess = "), strWorklistProcess, Translate(" (Changed from '"), hndWorklist_Process, Translate("')"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_SourceBarcode = "), hndWorklist_SourceBarcode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_DestinationBarcode = "), hndWorklist_DestinationBarcode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_Date = "), hndWorklist_Date);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_SourceWellID = "), hndWorklist_SourceWellID);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_DestinationWellID = "), hndWorklist_DestinationWellID);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- strWorklistSourceLabware = "), strWorklistSourceLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- strWorklistDestinationLabware = "), strWorklistDestinationLabware);
    }
  }
  if( 0 != hndWorklist.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndWorklist.RemoveFields();
  TRACEARRAY::TraceArray(Translate(">>>>> Full trace of the worklist <<<<<"), arrWorklist_SourceBarcodes, arrWorklist_SourceWellIDs, arrWorklist_SourceWellVolumes, arrWorklist_SourceLabwareTypes, arrWorklist_DestinationBarcodes, arrWorklist_DestinationWellIDs, arrWorklist_DestinationWellVolumes, arrWorklist_DestinationLabwareTypes, arrWorklist_Dates, arrWorklist_Processes, arr, arr, arr, arr, arr, arr);
  MECC::TraceComment(Translate("===========================================\n   Consolidate worklist into relevant information\n==========================================="));
  SANGERGENERAL::StatusDisplay_Update(Translate("---------- Performing Worklist Checks ----------"), Translate(""), 0);
  arrProcesses_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_Processes, arrProcesses_Unique, 0);
  intNumberOfUniqueProcesses=arrProcesses_Unique.GetSize();
  if (intNumberOfUniqueProcesses > 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Hamilton has identified too many processes in the active worklist. "), Translate("Please copy the worklist and split the processes types into individual worklists"));
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many process types in worklist"), Translate(""), 0);
    abort;
  }
  strProcessType = arrProcesses_Unique.ElementAt( 1 -1);
  JSONSEARCH::GetEveryEntry(Translate(""), Translate("approvedProcessConfig"), arrApprovedProcesses, intTrace);
  intNumberOfApprovedProcesses=arrApprovedProcesses.GetSize();
  blnPass = 0;
  {
    for(loopCounter4 = 0; loopCounter4 < intNumberOfApprovedProcesses;)
    {
      loopCounter4 = loopCounter4 + 1;
      strPossibleProcess=arrApprovedProcesses.GetAt(loopCounter4-1);
      if (strPossibleProcess == strProcessType)
      {
        blnPass = 1;
      }
    }
  }
  if (blnPass == 0)
  {
    if (blnAdmin == 0)
    {
      abort;
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- strProcessType: "), strProcessType);
  SANGERGENERAL::StatusDisplay_Update(Translate("Process Type: "), strProcessType, 0);
  arrDates_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_Dates, arrDates_Unique, 0);
  intNumberOfUniqueDates=arrDates_Unique.GetSize();
  if (intNumberOfUniqueDates > 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// The date stamp of each process does not match. "), Translate(" Please ensure you are using a up-to-date worklist, and all processes are scheduled for the same day"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Active worklist can be found here: "), strActiveRequestFilePath);
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many different dates in worklist"), Translate(""), 0);
    abort;
  }
  strWorklistDate = arrDates_Unique.ElementAt( 1 -1);
  strCurrentDate = TimGetFormattedDate(Translate("%d/%m/%Y"));
  if (strWorklistDate != strCurrentDate)
  {
    if (blnAdmin == 0)
    {
      abort;
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- strWorklistDate =  "), strWorklistDate);
  SANGERGENERAL::StatusDisplay_Update(Translate("Worklist Date: "), strWorklistDate, 0);
  arrWorklistBarcodes_Src_Unique.SetSize(0);
  arrWorklistBarcodes_Dest_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_DestinationBarcodes, arrWorklistBarcodes_Dest_Unique, 0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_SourceBarcodes, arrWorklistBarcodes_Src_Unique, 0);
  intNumberOfSourcePlates=arrWorklistBarcodes_Src_Unique.GetSize();
  intNumberOfDestinationPlates=arrWorklistBarcodes_Dest_Unique.GetSize();
  arrInWorklistBarcodes = HSLExtensions::Array::Concat(arrWorklistBarcodes_Src_Unique, arrWorklistBarcodes_Dest_Unique);
  strSourceLabwareType=arrWorklist_SourceLabwareTypes.GetAt(1-1);
  strDestinationLabwareType=arrWorklist_DestinationLabwareTypes.GetAt(1-1);
  strDate_FolderFormat = TimGetFormattedDate(Translate("%Y_%m_%d"));
  strArchiveFolderPath = StrConcat4(strActiveRequestFolderPath, Translate("Archive\\"), strDate_FolderFormat, Translate("\\"));
  rtnValue = FileDirectoryLib::CheckIfDirectoryExists(strArchiveFolderPath);
  if (rtnValue == 0)
  {
    FileDirectoryLib::CreateDirectory(strArchiveFolderPath);
  }
  arrArchiveFolderPaths.SetSize(0);
  FileDirectoryLib::GetSubdirectoriesOfDirectory(strArchiveFolderPath, arrArchiveFolderPaths);
  intNumberOfPreviousRunsToday=arrArchiveFolderPaths.GetSize();
  intCurrentRunNumber = intNumberOfPreviousRunsToday + 1;
  strCurrentRunFolderPath = StrConcat4(strArchiveFolderPath, Translate("Run "), intCurrentRunNumber, Translate("\\"));
  rtnValue = FileDirectoryLib::CheckIfDirectoryExists(strCurrentRunFolderPath);
  if (rtnValue == 0)
  {
    FileDirectoryLib::CreateDirectory(strCurrentRunFolderPath);
  }
  strArchiveFilePath = StrConcat4(strCurrentRunFolderPath, Translate(""), _intRequestCount, Translate("_OriginalWorklist.csv"));
  FileDirectoryLib::MoveFile(strActiveRequestFilePath, strArchiveFilePath);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Worklist successfully moved to archive folder"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- File Location: "), strArchiveFilePath);
  return (1);
}

private function E_PipettingSteps(  ) void {
  private variable intStep;
  private variable strCurrentStep;
  private variable intActivePlate;
  private variable strCurrentStep_Details;
  private variable strCurrentStep_Event;
  private variable loopCounter1;
  private variable blnLoopBreak;
  private variable intNumberOfPlatesProcessed;
  private variable blnFirstTransfer;
  private variable strJsonSearchString;
  private variable intSequencePositions;
  private variable strTempVolume;
  private variable intTempVolume;
  private variable strIndex;
  private variable strTempUnit;
  private variable intTempUnit;
  private variable intTotalVolume;
  private dialog customDialog_5;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                        Pipetting Steps - Start\n\n******************************************************************************************************************************************************"));
  SANGERGENERAL::StatusDisplay_Update(Translate("===== Pipetting steps to begin ====="), Translate(""), 0);
  blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_1000ulFiltered, Translate("TipCounter_1mLFiltered"), 8);
  blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_4mLFiltered, Translate("TipCounter_4mLFiltered"), 8);
  intStep = 1;
  strCurrentStep_Event = Translate("");
  strCurrentStep_Details = Translate("");
  intActivePlate = 1;
  blnLoopBreak = 0;
  MECC::TraceComment(Translate("---------- Get Workflow ----------"));
  strJsonSearchString = StrConcat2(strProcessType, Translate("Workflow"));
  JSONSEARCH::GetEveryEntry(Translate(""), strJsonSearchString, arrWorkflow, intTrace);
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("===== Arrray of steps to be performed ====="), arrWorkflow);
  MECC::TraceComment(Translate("====================================\n                        Start workflow\n===================================="));
  customDialog_5.InitCustomDialog("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");
  customDialog_5.ShowCustomDialog();
  {
    while (1 == 1)
    {
      // Find the next step in the method
      strCurrentStep = arrWorkflow.GetAt(intStep - 1);
      // Identify the event & details from the step
      strCurrentStep_Event = StrLeft(strCurrentStep, StrFind(strCurrentStep, "_"));
      strCurrentStep_Details = StrRight(strCurrentStep,(StrGetLength(strCurrentStep) - StrFind(strCurrentStep, "_") - 1));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Current step: "), strCurrentStep_Event, Translate(" - "), strCurrentStep_Details);
      // Find base volume
      strIndex = StrFind(strCurrentStep_Details, "mL");
      if (strIndex != -1) {
            strTempVolume = StrLeft(strCurrentStep_Details, strIndex);
            intTempVolume = StrIVal(strTempVolume);
      }
      // Find base unit
      strTempUnit = StrRight(strCurrentStep_Details, StrGetLength(strCurrentStep_Details) - strIndex);
      // Get transfer volume
      if (strTempUnit == "uL") {
            intTempUnit = 1;
      } else {
            intTempUnit = 1000;
      }
      intTotalVolume = intTempVolume * intTempUnit;
      // Trace out
      if (intTotalVolume != 0) {
           TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("///// Total volume to transfer= "), intTotalVolume, Translate("uL"),"");
         }
      if (strCurrentStep_Event == "transportiSwap")
      {
        intNumberOfPlatesProcessed = Trp_DeckTransport(strCurrentStep_Details, 0, 2, blnFirstTransfer, 0);
      }
      if (strCurrentStep_Event == "transportCORE")
      {
        intNumberOfPlatesProcessed = Trp_DeckTransport(strCurrentStep_Details, 0, 2, blnFirstTransfer, 1);
      }
      if (strCurrentStep_Event == "pipettingTiltToWaste")
      {
        PIP_BulkMediaTransfers(strCurrentStep_Details, Translate("tilt"), Translate("waste"), intTotalVolume);
      }
      if (strCurrentStep_Event == "pipettingMediaToTilt")
      {
        PIP_BulkMediaTransfers(strCurrentStep_Details, Translate("reservoir1"), Translate("tilt"), intTotalVolume);
      }
      if (strCurrentStep_Event == "increment")
      {
        MECC::TraceComment(Translate("----- Move to next plate -----"));
        {
          for(loopCounter1 = 0; loopCounter1 < 2;)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_6 ;
            err.Clear();
            SeqRemoveAt(arrAllSequences.ElementAt( 3 -1), 1);
            errLabel_6 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              MECC::TraceComment(Translate("SeqRemoveAll Failed"));
              break;
            }   /* end if from skip handler if no error */
          }
        }
        intSequencePositions = SeqGetTotal(arrAllSequences.ElementAt( 3 -1));
        if (intSequencePositions == 0)
        {
          break;
        }
        intActivePlate = intActivePlate + 2;
        intStep = 0;
        blnFirstTransfer = 0;
      }
      intStep = intStep + 1;
    }
  }
}

private function D_LoadInstructions(  ) void {
  private variable intDaysSinceClean;
  private variable strMessage;
  private variable intMaxDaysBetweenUVCycles;
  private variable intTipsNeeded_4mL;
  private variable intTipsPerPlate_4mL;
  private variable intTipsNeeded_1mL;
  private variable blnClean;
  private variable intTipsPerPlate_1mL;
  private variable blnCleanType;
  private variable intMaxTimeBetweenDeepCleans;
  private variable strDialogTitle;
  private variable strDialogMessage;
  private variable fltAngle;
  private variable fltX;
  private variable fltY;
  private variable fltZ;
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  if(0){
    blnClean = 0;
    if (lpCount > 1)
    {
    }
    intDaysSinceClean = SANGERGENERAL::GetDaysSinceClean(blnAdmin);
    if (intDaysSinceClean > intMaxDaysBetweenUVCycles)
    {
      blnClean = 1;
    }
    intTipsNeeded_1mL = intTipsPerPlate_1mL * intNumberOfSourcePlates;
    blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_1000ulFiltered, Translate("TipCounter_1mLFiltered"), intTipsNeeded_1mL);
    if (blnTipReload == 1)
    {
      blnClean = 1;
    }
    intTipsNeeded_4mL = intTipsPerPlate_4mL * intNumberOfSourcePlates;
    blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_4mLFiltered, Translate("TipCounter_4mLFiltered"), intTipsNeeded_4mL);
    if (blnTipReload == 1)
    {
      blnClean = 1;
    }
    if (intDaysSinceClean >= 2)
    {
      blnClean = 1;
    }
    if (blnClean == 0)
    {
      return;
    }
  }
  if(0){
    if (intDaysSinceClean <= intMaxTimeBetweenDeepCleans)
    {
      blnCleanType = 1;
      strMessage = Translate("Short clean required");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// "), strMessage);
    }
    else
    {
      blnCleanType = 2;
      strMessage = Translate("Deep clean required");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// "), strMessage);
    }
    SANGERGENERAL::StatusDisplay_Update(strMessage, Translate(""), 0);
  }
  if(0){
    if (blnCleanType >= 1)
    {
      AswStandardDialogs::Initialize();
      AswStandardDialogs::SetDefaultLanguage(AswStandardDialogs::DialogLanguage::English);
      strDialogTitle = StrConcat2(Translate("STARplus - Instrument Cleaning"), Translate(""));
      strDialogMessage = StrConcat8(Translate("Please remove all of the carriers from the Hamilton."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\n"), Translate("Press 'Ok' to continue the method"));
      DevGetLabwarePosition(ML_STAR, Translate("RightMostDeckPos"), fltX, fltY, fltZ, fltAngle);
      ML_STAR._55AA8CFA_FB6C_4691_8C8C_8D410E2123FD("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"); // XLMoveToPosition
      strImagePath = StrConcat2(strImageFolderPath, strImageFilePath);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
      AswStandardDialogs::MessageDialogWithImage(strDialogTitle, AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, strDialogMessage, strImagePath, 0);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
      strDialogMessage = StrConcat8(Translate("Please clean the right side of the Hamilton"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\n"), Translate("Press 'Ok' to continue the method"));
      ML_STAR._55AA8CFA_FB6C_4691_8C8C_8D410E2123FD("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"); // XLMoveToPosition
      strImagePath = StrConcat2(strImageFolderPath, strImageFilePath);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
      AswStandardDialogs::MessageDialogWithImage(strDialogTitle, AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, strDialogMessage, strImagePath, 0);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
      strDialogMessage = StrConcat8(Translate("Please inspect the centrifuge"), Translate("Wipe the surfaces down if necessary"), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\n"), Translate("Press 'Ok' to continue the method"));
      strImagePath = StrConcat2(strImageFolderPath, strImageFilePath);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
      AswStandardDialogs::MessageDialogWithImage(strDialogTitle, AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, strDialogMessage, strImagePath, 0);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
      AswStandardDialogs::Terminate();
      UV_STARPLUS::Lights(1, tmrUVLight, ML_STAR);
      frkHandle = Fork("_CycleSystem");
      Trace("----- frkHandle = ", frkHandle);
      if (0 == frkHandle)
      {
           err.Raise(0, "Failed to fork: _CycleSystem");
      }
    }
    if (blnCleanType == 2)
    {
    }
  }
  if(0){
    SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
  }
  if(0){
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqTransport_Loading, Translate("Please load source plates here"));
  }
  if(0){
    SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
  }
}

private function _PlateDefinitions( sequence & _seq, variable & _arr[] ) void {
  private variable _int;
  private variable _strJsonSubSearchString;
  private variable _strJsonSearchString;
  private variable loopCounter1;
  private variable _intSizeOfArray;
  private variable _arrSearches[];
  _arr.SetSize( 0);
  _strJsonSearchString = StrConcat2(strSourceLabwareType, Translate("Config,labwareConfig"));
  _arr.SetSize(0);
  _arrSearches.SetSize(0);
  _arrSearches.AddAsLast(Translate(",gripHeight"));
  _arrSearches.AddAsLast(Translate(",gripWidth"));
  _arrSearches.AddAsLast(Translate(",gripWidthOpen"));
  _arrSearches.AddAsLast(Translate(",gripForce"));
  _arrSearches.AddAsLast(Translate(",gripSpeed"));
  _arrSearches.AddAsLast(Translate(",zSpeedGet"));
  _arrSearches.AddAsLast(Translate(",zSpeedPlace"));
  _arrSearches.AddAsLast(Translate(",xAcceleration"));
  _arrSearches.AddAsLast(Translate(",platePress"));
  _arrSearches.AddAsLast(Translate(",tolerance"));
  _intSizeOfArray=_arrSearches.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < _intSizeOfArray;)
    {
      loopCounter1 = loopCounter1 + 1;
      _strJsonSubSearchString = StrConcat2(_strJsonSearchString, _arrSearches.ElementAt( 1 -1));
      _int = JSONSEARCH::GetSpecificStringEntry(Translate(""), _strJsonSubSearchString, intTrace);
      _arr.AddAsLast(_int);
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("PlateDefinitions"), _arr);
}

private function F_EndOfRequest( variable _intRequestCount ) void {
  private variable strArchiveFilePath;
  private variable strSchemaFilePath;
  private variable strActiveFilePath;
  private variable strMethodsFolderPath;
  MECC::TraceComment(Translate("====================================\n                    Archive the Worklist\n===================================="));
  MECC::TraceComment(Translate("***** Delete Shema File *****"));
  strMethodsFolderPath = FilGetMethodsPath();
  strSchemaFilePath = StrConcat2(strActiveRequestFolderPath, Translate("schema.ini"));
  FileDirectoryLib::DeleteFile(strSchemaFilePath);
  MECC::TraceComment(Translate("***** Move Active Worklist *****"));
  strActiveFilePath = StrConcat2(strActiveRequestFolderPath, Translate("ActiveRequest.csv"));
  strArchiveFilePath = StrConcat4(strCurrentRunFolderPath, Translate(""), _intRequestCount, Translate("_AccurateWorklist.csv"));
  FileDirectoryLib::MoveFile(strActiveFilePath, strArchiveFilePath);
  MECC::TraceComment(Translate("***** Copy Logfile *****"));
  MECC::TraceComment(Translate("====================================\n                    Update User Log with current date\n===================================="));
}

private function Trp_DeckTransport( variable _strCurrentStep_Details, variable _blnToolEject, variable _intCheckPlate, variable & _blnFirstTransfer, variable _blnCore ) variable {
  private variable _loopCounter1;
  private variable _blnPressPlate;
  private variable _blnCheckPlate;
  private sequence _seqDestination;
  private sequence _seqSource;
  private variable _strDestinationLocation;
  private variable _intTemp;
  private variable _strSourceLocation;
  private variable _intLength;
  private variable _intNumberOfPossibleSequences;
  private variable _intSeqMaxTransfers;
  private variable _intFoundSequence;
  private variable _intLoopCount;
  private variable _intSeqSrc_Length;
  private variable _intSeqDest_Length;
  SeqRemoveAll(_seqSource);
  SeqRemoveAll(_seqDestination);
  _blnPressPlate = 0;
  _blnCheckPlate = 0;
  if (_intCheckPlate == 1)
  {_blnCheckPlate = 1;}
  if (_intCheckPlate == 2)
  {_blnPressPlate = 1;}
  if (_intCheckPlate == 3)
  {_blnPressPlate = 1;
     _blnCheckPlate = 1;}
  _intTemp = StrFind(_strCurrentStep_Details, Translate("To"));
  _strSourceLocation = StrLeft(_strCurrentStep_Details, _intTemp);
  _intTemp = StrFind(_strCurrentStep_Details, Translate("To"));
  _intLength = StrGetLength(_strCurrentStep_Details);
  _intTemp = _intLength - _intTemp;
  _intTemp = _intTemp - 2;
  _strDestinationLocation = StrRight(_strCurrentStep_Details, _intTemp);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Current Step Transport Details:: "), _strCurrentStep_Details);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>>>> Source Location: "), _strSourceLocation);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>>>> Destination Location: "), _strDestinationLocation);
  _intFoundSequence = 0;
  _intNumberOfPossibleSequences=arrAllSequences.GetSize();
  {
    for(_loopCounter1 = 0; _loopCounter1 < _intNumberOfPossibleSequences;)
    {
      _loopCounter1 = _loopCounter1 + 1;
      if (_strSourceLocation == arrOnDeckLocations.ElementAt( _loopCounter1 -1))
      {
        if (_intFoundSequence != 3)
        {
          SeqCopySequence(_seqSource, arrAllSequences.ElementAt( _loopCounter1 -1));
          _intFoundSequence = _intFoundSequence + 3;
        }
      }
      if (_strDestinationLocation == arrOnDeckLocations.ElementAt( _loopCounter1 -1))
      {
        if (_intFoundSequence != 7)
        {
          SeqCopySequence(_seqDestination, arrAllSequences.ElementAt( _loopCounter1 -1));
          _intFoundSequence = _intFoundSequence + 7;
        }
      }
    }
  }
  if (_intFoundSequence == 10)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>>>> Source sequence successfully identified"), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>>>> Destination sequence successfully identified"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Transport location does not match deck location"), Translate(""));
    abort;
  }
  _intSeqSrc_Length = SANGERGENERAL::GetAvailableSeqPositions(_seqSource);
  _intSeqDest_Length = SANGERGENERAL::GetAvailableSeqPositions(_seqDestination);
  if (_intSeqSrc_Length <= _intSeqDest_Length)
  {
    _intSeqMaxTransfers = _intSeqSrc_Length;
    _intLoopCount = _intSeqDest_Length;
  }
  else
  {
    _intSeqMaxTransfers = _intSeqDest_Length;
    _intLoopCount = _intSeqSrc_Length;
  }
  _seqSource.SetCount(_intSeqMaxTransfers);
  _seqDestination.SetCount(_intSeqMaxTransfers);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, _seqSource);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, _seqDestination);
  if (_blnCore == 1)
  {
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate(""), Translate(""), Translate("     CORE Labware Transport"));
    _TRP_CORE(_seqSource, _seqDestination, _intSeqMaxTransfers, _blnToolEject, _strSourceLocation, _strDestinationLocation, _blnFirstTransfer);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate(""), Translate(""), Translate("     CORE Labware Transport"));
  }
  else
  {
  }
  return (_loopCounter1);
  MECC::TraceComment(Translate("==========================================================\n\n                                            Deck Transport - End\n\n=========================================================="));
}

private function C_CreateSeq(  ) void {
  private variable strLoadIDSuffix;
  private variable strLoadID;
  private variable arrDeckViewReset[];
  private variable loopCounter12;
  private variable loopCounter3;
  private variable loopCounter1;
  private variable intFound;
  private variable strLabwareID;
  private variable index;
  private variable loopCounter2;
  private variable loopCounter7;
  private variable intCount;
  private variable intMaxPossibleLabware;
  private variable strLabwarePrefix;
  private variable loopCounter4;
  private sequence seq;
  private variable strPositionID;
  private variable strSourceLabwareType_Lower;
  private variable intNumberOfWells;
  private variable rtnFound;
  private variable loopCounter5;
  private variable arrAllLabware[];
  private variable strOnDeckLocation;
  private variable intNumberOfDifferentLocations;
  private variable arrOnDeckLabware[];
  private variable arrLabwarePerLocation[];
  private variable intNumberOfSequences;
  private variable loopCounter6;
  private sequence seqTransport_BC;
  private variable intNumberOfWells_Destination;
  private variable intNumberOfWells_Source;
  private variable strLabwarePrefix_Destination;
  private variable intMaxPossibleLabware_Destination;
  private variable intMaxPossibleLabware_Source;
  private variable strLabwarePrefix_Source;
  private sequence seqDestination;
  private sequence seqSource;
  private variable arrOnDeckPossibleLabware[];
  private sequence arrAllSequences_Source[];
  private sequence arrAllSequences_Destination[];
  private variable loopCounter8;
  private variable intCount_Destination;
  private variable intCount_Source;
  private variable intIndex_Destination;
  private variable intIndex_Source;
  private variable arrOnDeckPossibleLabware_Destination[];
  private variable arrLabwarePerLocation_Source[];
  private variable arrLabwarePerLocation_Destination[];
  private variable arrOnDeckPossibleLabware_Source[];
  private sequence seqTiltPipetting_Source;
  private sequence seqTiltPipetting_Destination;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Sequence Creation - Start\n\n******************************************************************************************************************************************************"));
  arrOnDeckLocations.SetSize(0);
  arrOnDeckLocations.AddAsLast(Translate("Stacked"));
  arrOnDeckLocations.AddAsLast(Translate("Active"));
  arrOnDeckLocations.AddAsLast(Translate("Loading"));
  arrOnDeckLocations.AddAsLast(Translate("Tilt"));
  arrOnDeckLocations.AddAsLast(Translate("HHS"));
  arrOnDeckLocations.AddAsLast(Translate("Barcoding"));
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(">> Possible on-deck labware locations"), arrOnDeckLocations);
  SeqRemoveAll(seqSource);
  SeqRemoveAll(seqDestination);
  if (strSourceLabwareType == "autoflask")
  {
    strLabwarePrefix_Source = Translate("Greiner_AutoFlask");
    intNumberOfWells_Source = JSONSEARCH::GetSpecificStringEntry(Translate(""), Translate("autoflaskConfig,wellNumber"), intTrace);
    SeqCopySequence(seqSource, ML_STAR.maxAutoflasks);
    intMaxPossibleLabware_Source = SeqGetTotal(seqSource);
  }
  if (strDestinationLabwareType == "autoflask")
  {
    strLabwarePrefix_Destination = Translate("Greiner_AutoFlask");
    intNumberOfWells_Destination = JSONSEARCH::GetSpecificStringEntry(Translate(""), Translate("autoflaskConfig,wellNumber"), intTrace);
    SeqCopySequence(seqSource, ML_STAR.maxAutoflasks);
    intMaxPossibleLabware_Destination = SeqGetTotal(seqSource);
  }
  intMaxPossibleLabware = intMaxPossibleLabware_Source + intMaxPossibleLabware_Destination;
  if (intMaxPossibleLabware == 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> A sequence is missing labware"), Translate(""));
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> strLabwarePrefix_Source: "), strLabwarePrefix_Source);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> strLabwarePrefix_Destination: "), strLabwarePrefix_Destination);
  arrOnDeckPossibleLabware_Source.SetSize(0);
  arrOnDeckPossibleLabware_Destination.SetSize(0);
  arrLabwarePerLocation_Source.SetSize(0);
  arrLabwarePerLocation_Destination.SetSize(0);
  {
    for(loopCounter1 = 0; loopCounter1 < intMaxPossibleLabware_Source;)
    {
      loopCounter1 = loopCounter1 + 1;
      strLabwareID = SeqGetLabwareId(seqSource);
      arrOnDeckPossibleLabware_Source.AddAsLast(strLabwareID);
      SeqIncrement(seqSource, 1);
    }
  }
  SeqResetSequenceIndexes(seqSource);
  {
    for(loopCounter2 = 0; loopCounter2 < intMaxPossibleLabware_Destination;)
    {
      loopCounter2 = loopCounter2 + 1;
      strLabwareID = SeqGetLabwareId(seqDestination);
      arrOnDeckPossibleLabware_Destination.AddAsLast(strLabwareID);
      SeqIncrement(seqDestination, 1);
    }
  }
  SeqResetSequenceIndexes(seqDestination);
  intNumberOfDifferentLocations=arrOnDeckLocations.GetSize();
  {
    for(loopCounter3 = 0; loopCounter3 < intNumberOfDifferentLocations;)
    {
      loopCounter3 = loopCounter3 + 1;
      intIndex_Source = 0;
      intIndex_Destination = 0;
      strOnDeckLocation=arrOnDeckLocations.GetAt(loopCounter3-1);
      strOnDeckLocation = StrMakeLower(strOnDeckLocation);
      {
        for(loopCounter4 = 0; loopCounter4 < intMaxPossibleLabware_Source;)
        {
          loopCounter4 = loopCounter4 + 1;
          strLabwareID=arrOnDeckPossibleLabware_Source.GetAt(loopCounter4-1);
          strLabwareID = StrMakeLower(strLabwareID);
          intFound = StrFind(strLabwareID, strOnDeckLocation);
          if (intFound >= 1)
          {
            intIndex_Source = intIndex_Source + 1;
          }
        }
      }
      {
        for(loopCounter8 = 0; loopCounter8 < intMaxPossibleLabware_Destination;)
        {
          loopCounter8 = loopCounter8 + 1;
          strLabwareID=arrOnDeckPossibleLabware_Destination.GetAt(loopCounter8-1);
          strLabwareID = StrMakeLower(strLabwareID);
          intFound = StrFind(strLabwareID, strOnDeckLocation);
          if (intFound >= 1)
          {
            intIndex_Destination = intIndex_Destination + 1;
          }
        }
      }
      arrLabwarePerLocation_Source.AddAsLast(intIndex_Source);
      arrLabwarePerLocation_Destination.AddAsLast(intIndex_Destination);
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("----- All Possible Labware -----"), arrOnDeckLabware);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("----- Number of each labware variant -----"), arrLabwarePerLocation);
  arrAllSequences_Source.SetSize(0);
  arrAllSequences_Destination.SetSize(0);
  arrAllLabware.SetSize(0);
  SeqRemoveAll(seqTiltPipetting_Source);
  SeqRemoveAll(seqTiltPipetting_Destination);
  SeqRemoveAll(seqTransport_Stacked);
  SeqRemoveAll(seqTransport_Active);
  SeqRemoveAll(seqTransport_Loading);
  SeqRemoveAll(seqTransport_Tilt);
  SeqRemoveAll(seqTransport_HHS);
  SeqRemoveAll(seqTransport_BC);
  arrAllSequences_Source.AddAsLast(seqTransport_Stacked);
  arrAllSequences_Source.AddAsLast(seqTransport_Active);
  arrAllSequences_Source.AddAsLast(seqTransport_Loading);
  arrAllSequences_Source.AddAsLast(seqTransport_Tilt);
  arrAllSequences_Source.AddAsLast(seqTransport_HHS);
  arrAllSequences_Source.AddAsLast(seqTransport_BC);
  arrAllSequences_Destination.AddAsLast(seqTransport_Stacked);
  arrAllSequences_Destination.AddAsLast(seqTransport_Active);
  arrAllSequences_Destination.AddAsLast(seqTransport_Loading);
  arrAllSequences_Destination.AddAsLast(seqTransport_Tilt);
  arrAllSequences_Destination.AddAsLast(seqTransport_HHS);
  arrAllSequences_Destination.AddAsLast(seqTransport_BC);
  {
    for(loopCounter4 = 0; loopCounter4 < intNumberOfDifferentLocations;)
    {
      loopCounter4 = loopCounter4 + 1;
      intCount=arrLabwarePerLocation_Source.GetAt(loopCounter4-1);
      if (intNumberOfSourcePlates < intCount)
      {
        intCount_Source = intNumberOfSourcePlates;
      }
      else
      {
        intCount_Source = intCount;
      }
      intCount=arrLabwarePerLocation_Destination.GetAt(loopCounter4-1);
      if (intNumberOfDestinationPlates < intCount)
      {
        intCount_Destination = intNumberOfDestinationPlates;
      }
      else
      {
        intCount_Destination = intCount;
      }
      {
        for(loopCounter7 = 0; loopCounter7 < intCount;)
        {
          loopCounter7 = loopCounter7 + 1;
          if (loopCounter7 < 10)
          {
            strLoadIDSuffix = StrConcat2(Translate("0"), loopCounter7);
          }
          else
          {
            strLoadIDSuffix = StrConcat2(Translate(""), loopCounter7);
          }
          strLoadID = StrConcat8(strLabwarePrefix_Source, Translate("_"), arrOnDeckLocations.ElementAt( loopCounter4 -1), Translate("_"), Translate("00"), strLoadIDSuffix, Translate(""), Translate(""));
          if (arrOnDeckLocations.ElementAt( loopCounter4 -1) != "Stacked")
          {
            {
              for(loopCounter5 = 0; loopCounter5 < intNumberOfWells_Source;)
              {
                loopCounter5 = loopCounter5 + 1;
                strPositionID = Translate("A1");
                DevSetBarcodeData(ML_STAR, strLoadID, strPositionID, Translate(""));
                SeqAdd(arrAllSequences_Source.ElementAt( loopCounter4 -1), strLoadID, strPositionID);
              }
            }
          }
          strLoadID = StrConcat8(strLabwarePrefix_Destination, Translate("_"), arrOnDeckLocations.ElementAt( loopCounter4 -1), Translate("_"), Translate("00"), strLoadIDSuffix, Translate(""), Translate(""));
          if (arrOnDeckLocations.ElementAt( loopCounter4 -1) != "Stacked")
          {
            {
              for(loopCounter5 = 0; loopCounter5 < intNumberOfWells_Destination;)
              {
                loopCounter5 = loopCounter5 + 1;
                strPositionID = Translate("A1");
                DevSetBarcodeData(ML_STAR, strLoadID, strPositionID, Translate(""));
                SeqAdd(arrAllSequences_Destination.ElementAt( loopCounter4 -1), strLoadID, strPositionID);
              }
            }
          }
        }
      }
      if (arrOnDeckLocations.ElementAt( loopCounter4 -1) == "Tilt")
      {
        SeqCopySequence(seqTiltPipetting, arrAllSequences_Source.ElementAt( loopCounter4 -1));
        SeqCopySequence(seqTiltPipetting, arrAllSequences_Destination.ElementAt( loopCounter4 -1));
      }
      SeqResetSequenceIndexes(arrAllSequences_Source.ElementAt( loopCounter4 -1));
      SeqResetSequenceIndexes(arrAllSequences_Destination.ElementAt( loopCounter4 -1));
    }
  }
  intNumberOfSequences=arrAllSequences.GetSize();
  {
    for(loopCounter6 = 0; loopCounter6 < intNumberOfSequences;)
    {
      loopCounter6 = loopCounter6 + 1;
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, arrAllSequences_Source.ElementAt( loopCounter6 -1));
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, arrAllSequences_Destination.ElementAt( loopCounter6 -1));
    }
  }
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, seqTiltPipetting_Source);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, seqTiltPipetting_Destination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- Sequences successfully generated"), Translate(""));
}

private function __GetPlateBarcode( sequence & seq, variable _blnTool, variable _intAcceleration ) variable {
  private variable _intLookup;
  private variable _strTime;
  private variable _strBarcode;
  private timer _delay;
  private variable strLabID;
  private variable strBC;
  private variable strPosID;
  private variable _lp;
  MECC::TraceComment(Translate("Get Labware Details"));
  strBC = Translate("");
  strLabID = SeqGetLabwareId(seq);
  strPosID = SeqGetPositionId(seq);
  DevGetBarcodeData(ML_STAR, strLabID, strPosID, strBC);
  if (strBC == "")
  {
    MECC::TraceComment(Translate("----- Unknown Barcode -----"));
    if (blnSimMode == 1)
    {
      _strTime = TimGetFormattedTime(Translate("%M%S"));
      if( 0 == _delay.SetTimer(1) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == _delay.WaitTimer(hslFalse, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      strBC = StrConcat2(Translate("FakeBC_"), _strTime);
    }
    else
    {
      HSLBarcodeReader::DelComBuffer();
      _strBarcode = Translate("");
      {
        _lp = 0;
        while (1 == 1)
        {
          _lp = _lp + 1;
          strBC = HSLBarcodeReader::Read();
          if (strBC != "")
          {
            break;
          }
          if (_blnTool == 1)
          {
            ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
          }
          else
          {
            ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
          }
        }
      }
    }
    if(0){
      _intLookup = LOOKUP::Lookup(arrScannedBarcodes, _strBarcode);
      if (_intLookup >= 1)
      {
        MECC::TraceComment(Translate("----- Plate has already been scanned -----"));
      }
      else
      {
        arrScannedBarcodes.AddAsLast(_strBarcode);
      }
      _intLookup = LOOKUP::Lookup(arrInWorklistBarcodes, _strBarcode);
      if (_intLookup >= 1)
      {
      }
      else
      {
        if (blnSimMode == 0)
        {
          MECC::TraceComment(Translate("----- Plate cannot be found in worklist -----"));
          abort;
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("-- Scanned Barcode:: "), strBC);
  }
  return (strBC);
}

private function PIP_BulkMediaTransfers( variable _strEventDetails, variable _strSourceLocation, variable _strDestinationLocation, variable _intTotalVolume ) void {
  private variable _strLabID;
  private variable _strBC;
  private variable _lpCounter;
  private variable _strPosID;
  private variable _intSeqPos;
  private variable _loopCounter1;
  private variable _strCP;
  private sequence _seqTemp;
  private variable _strLC;
  private variable _intMaxTipVolume;
  private variable _intTransferVolume;
  private variable _intWellNumber;
  private variable _intNumberOfChannels;
  private variable _loopCounter2;
  private variable _intChannelsPerTransfer;
  private sequence _seqTip;
  private variable _strTipCounter;
  private variable _loopCounter3;
  private variable _strJsonSearchString;
  private variable _intNumberOfTransfersPerPlate;
  private variable _intTiltSpeed;
  private variable _intNumberOfPlates;
  private variable _intTiltAngle;
  private variable _arrUniqueLabwares[];
  private variable _strNumberOfXLChannels;
  private variable _intFixHeight;
  private sequence _seqDestination;
  private sequence _seqSource;
  private variable _blnIncrementSrc;
  private variable _blnIncrementDest;
  private variable _intMaxPos;
  private variable _intCurrentPos;
  private variable _intAvailablePos;
  private variable _blnTilt;
  private variable _intAngle;
  private variable _intTiltCurrentZ;
  private variable _intTilt_NewZ;
  private variable _intTilt_CurrentX;
  private variable _intRadius;
  private variable _intTilt_CurrentZ;
  private variable _intTilt_XOffset;
  private variable _intTilt_ZOffset;
  private variable _intTilt_NewX;
  private variable _blnRes;
  _intFixHeight = 5;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate(""), Translate(""), Translate("     Pipetting - Media to Waste"));
  if (_strSourceLocation == _strDestinationLocation)
  {
    abort;
  }
  _blnTilt = 0;
  _blnRes = 0;
  SeqRemoveAll(_seqSource);
  SeqRemoveAll(_seqDestination);
  SeqCopySequence(_seqTip, ML_STAR.Tips_4mLFiltered);
  if (_strSourceLocation == "tilt")
  {
    SeqCopySequence(_seqTemp, seqTiltPipetting);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, seqTiltPipetting);
    _intSeqPos = SeqGetTotal(_seqTemp);
    _seqTemp.SetCurrentPosition(1);
    {
      for(_lpCounter = 0; _lpCounter < _intSeqPos;)
      {
        _lpCounter = _lpCounter + 1;
        _strLabID = SeqGetLabwareId(_seqTemp);
        _strPosID = SeqGetPositionId(_seqTemp);
        DevGetBarcodeData(ML_STAR, _strLabID, _strPosID, _strBC);
        if (_strBC != "")
        {
          SeqAdd(_seqSource, _strLabID, _strPosID);
        }
        SeqIncrement(_seqTemp, 1);
        _arrUniqueLabwares.AddAsLast(_strLabID);
      }
    }
    UNIQUE_MEMBERS::Unique_members(_arrUniqueLabwares, _arrUniqueLabwares, 0);
    _intNumberOfPlates=_arrUniqueLabwares.GetSize();
    _seqSource.SetCurrentPosition(1);
    _intSeqPos = SANGERGENERAL::GetAvailableSeqPositions(_seqSource);
    _blnIncrementSrc = 1;
    _blnTilt = 1;
  }
  if (_strSourceLocation == "reservoir1")
  {
    SeqCopySequence(_seqSource, ML_STAR.res_WarmMedia_4mL);
    _blnIncrementSrc = 0;
    _blnRes = 1;
  }
  if (_strSourceLocation == "reservoir2")
  {
    _blnIncrementSrc = 0;
    _blnRes = 1;
  }
  if (_strSourceLocation == "trypLE")
  {
    SeqCopySequence(_seqSource, ML_STAR.res_TrypLE);
    _blnIncrementSrc = 0;
    _blnRes = 1;
  }
  _seqSource.SetCurrentPosition(1);
  if (_strDestinationLocation == "tilt")
  {
    SeqCopySequence(_seqTemp, arrAllSequences.ElementAt( 4 -1));
    _intSeqPos = SeqGetTotal(_seqTemp);
    _seqTemp.SetCurrentPosition(1);
    {
      for(_lpCounter = 0; _lpCounter < _intSeqPos;)
      {
        _lpCounter = _lpCounter + 1;
        _strLabID = SeqGetLabwareId(_seqTemp);
        _strPosID = SeqGetPositionId(_seqTemp);
        DevGetBarcodeData(ML_STAR, _strLabID, _strPosID, _strBC);
        if (_strBC != "")
        {
          SeqAdd(_seqDestination, _strLabID, _strPosID);
        }
        SeqIncrement(_seqTemp, 1);
        _arrUniqueLabwares.AddAsLast(_strLabID);
      }
    }
    UNIQUE_MEMBERS::Unique_members(_arrUniqueLabwares, _arrUniqueLabwares, 0);
    _intNumberOfPlates=_arrUniqueLabwares.GetSize();
    _seqDestination.SetCurrentPosition(1);
    _intSeqPos = SANGERGENERAL::GetAvailableSeqPositions(_seqDestination);
    _blnIncrementDest = 1;
    _blnTilt = 1;
  }
  if (_strDestinationLocation == "waste")
  {
    SeqCopySequence(_seqDestination, ML_STAR.res_Waste4mL);
    _blnIncrementDest = 0;
  }
  _seqDestination.SetCurrentPosition(1);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, _seqSource);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, _seqDestination);
  if (_intTotalVolume <= 1000)
  {
    abort;
  }
  _strTipCounter = Translate("TipCounter_4mLFiltered");
  _intMaxTipVolume = 4000;
  _strNumberOfXLChannels = 43;
  _intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, _strNumberOfXLChannels);
  _strJsonSearchString = StrConcat2(strSourceLabwareType, Translate("Config,wellNumber"));
  _intWellNumber = JSONSEARCH::GetSpecificStringEntry(Translate(""), _strJsonSearchString, intTrace);
  if (_intWellNumber >= _intNumberOfChannels)
  {
    _intChannelsPerTransfer = _intNumberOfChannels;
  }
  else
  {
    _intChannelsPerTransfer = _intWellNumber;
  }
  // Find the number of transfer loops
  _intNumberOfTransfersPerPlate = MthCeiling(_intTotalVolume / (_intMaxTipVolume * _intChannelsPerTransfer));
  //
  // Find the volume to transfer per loop
  _intTransferVolume = MthCeiling(_intTotalVolume / _intNumberOfTransfersPerPlate);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> Number of transfer cycles = "), _intNumberOfTransfersPerPlate);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> Transfer volume = "), _intTransferVolume);
  _strCP = Translate("");
  if (_intSeqPos >= _intNumberOfChannels)
  {
    _intChannelsPerTransfer = _intNumberOfChannels;
  }
  else
  {
    _intChannelsPerTransfer = _intSeqPos;
  }
  {
    for(_loopCounter2 = 0; _loopCounter2 < 20;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      if (_loopCounter2 <= _intChannelsPerTransfer)
      {
        _strCP = _strCP + Translate("1");
      }
      else
      {
        _strCP = _strCP + Translate("0");
      }
    }
  }
  _strJsonSearchString = StrConcat4(strSourceLabwareType, Translate("Config,pipettingMediaToWasteConfig,"), Translate("4"), Translate("mLLC"));
  _strLC = JSONSEARCH::GetSpecificStringEntry(Translate(""), _strJsonSearchString, intTrace);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> Channel Pattern = "), _strCP);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> Liquid class = "), _strLC);
  {
    while (1 == 1)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Pipetting cycle: "), _loopCounter1, Translate("/"), Translate("?????"));
      SANGERGENERAL::TipPickup(ML_STAR, _strCP, _seqTip, _strTipCounter, blnTesting);
      if (_blnTilt == 1)
      {
        _strJsonSearchString = StrConcat4(strSourceLabwareType, Translate("Config,pipettingMediaToWasteConfig,tiltAngle"), Translate(""), Translate(""));
        _intTiltAngle = JSONSEARCH::GetSpecificStringEntry(Translate(""), _strJsonSearchString, intTrace);
        _strJsonSearchString = StrConcat4(strSourceLabwareType, Translate("Config,pipettingMediaToWasteConfig,tiltSpeed"), Translate(""), Translate(""));
        _intTiltSpeed = JSONSEARCH::GetSpecificStringEntry(Translate(""), _strJsonSearchString, intTrace);
        if (_intNumberOfPlates >= 1)
        {
          Hamilton_Tilt_Clamp_Module::Tilt(devTilt_1, _intTiltSpeed, _intTiltAngle);
          if (_intNumberOfPlates >= 2)
          {
            Hamilton_Tilt_Clamp_Module::Tilt(devTilt_2, _intTiltSpeed, _intTiltAngle);
          }
        }
        _intRadius = 16;
        _intAngle = 4.88692;
        // Get current location
        _intTilt_CurrentX = MthSin(4.713) * _intRadius;
        _intTiltCurrentZ = MthCos(4.713) * _intRadius;
        // Get new relative location
        _intTilt_NewX = MthSin(_intAngle) * _intRadius;
        _intTilt_NewZ = MthCos(_intAngle) * _intRadius;
        _intTilt_XOffset = (_intTilt_NewX - _intTilt_CurrentX) * -1;
        _intTilt_ZOffset = _intTilt_NewZ - _intTilt_CurrentZ;
        if (_strSourceLocation == "tilt")
        {
          VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqSource, _intTilt_XOffset, 0, _intTilt_ZOffset);
        }
        else
        {
          if (_strDestinationLocation == "tilt")
          {
            VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqDestination, _intTilt_XOffset, 0, _intTilt_ZOffset);
          }
        }
      }
      {
        for(_loopCounter3 = 0; _loopCounter3 < _intNumberOfTransfersPerPlate;)
        {
          _loopCounter3 = _loopCounter3 + 1;
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("-- Transfer cycle: "), _loopCounter3, Translate("/"), _intNumberOfTransfersPerPlate);
          if (_blnRes == 1)
          {
          }
          ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
          ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
        }
      }
      if (_blnTilt == 1)
      {
        _strJsonSearchString = StrConcat4(strSourceLabwareType, Translate("Config,pipettingMediaToWasteConfig,tiltAngle"), Translate(""), Translate(""));
        _intTiltAngle = JSONSEARCH::GetSpecificStringEntry(Translate(""), _strJsonSearchString, intTrace);
        _strJsonSearchString = StrConcat4(strSourceLabwareType, Translate("Config,pipettingMediaToWasteConfig,tiltSpeed"), Translate(""), Translate(""));
        _intTiltSpeed = JSONSEARCH::GetSpecificStringEntry(Translate(""), _strJsonSearchString, intTrace);
        if (_intNumberOfPlates >= 1)
        {
          Hamilton_Tilt_Clamp_Module::Tilt(devTilt_1, _intTiltSpeed, 0);
          if (_intNumberOfPlates >= 2)
          {
            Hamilton_Tilt_Clamp_Module::Tilt(devTilt_2, _intTiltSpeed, 0);
          }
        }
        _intTilt_XOffset = _intTilt_XOffset * -1;
        _intTilt_ZOffset = _intTilt_ZOffset * -1;
        if (_strSourceLocation == "tilt")
        {
          VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqSource, _intTilt_XOffset, 0, _intTilt_ZOffset);
        }
        else
        {
          if (_strDestinationLocation == "tilt")
          {
            VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqDestination, _intTilt_XOffset, 0, _intTilt_ZOffset);
          }
        }
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
      MECC::TraceComment(Translate("----- Increment -----"));
      if (_blnIncrementSrc == 1)
      {
        SeqIncrement(_seqSource, _intChannelsPerTransfer);
        _intCurrentPos = _seqSource.GetCurrentPosition();
        _intMaxPos = SeqGetTotal(_seqSource);
        _intAvailablePos = _intMaxPos - _intCurrentPos;
        if (_intAvailablePos <= 0)
        {
          break;
        }
        if (_intCurrentPos == 0)
        {
          break;
        }
      }
      else
      {
        if (_blnIncrementDest == 1)
        {
          SeqIncrement(_seqDestination, _intChannelsPerTransfer);
          _intCurrentPos = _seqDestination.GetCurrentPosition();
          _intMaxPos = SeqGetTotal(_seqDestination);
          _intAvailablePos = _intMaxPos - _intCurrentPos;
          if (_intAvailablePos <= 0)
          {
            break;
          }
          if (_intCurrentPos == 0)
          {
            break;
          }
        }
        else
        {
          // Add something more complicated later
          // Stuck in an infinite pipetting loop
          abort;
        }
      }
    }
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate(""), Translate(""), Translate("     Pipetting - Media to Waste"));
}

private function _TRP_CORE( sequence & _seqSource, sequence & _seqDestination, variable _intSeqMaxTransfers, variable _blnToolEject, variable _strSourceLocation, variable _strDestinationLocation, variable & _blnFirstTransfer ) variable {
  private variable strBarcode;
  private variable strLabID;
  private variable _intCOREChannelToUse;
  private variable _blnPressPlate;
  private variable _blnEject;
  private variable _loopCounter1;
  private variable _blnCheckPlate;
  private variable strPosID;
  private variable _arrPlateDefinitions[];
  _intCOREChannelToUse = JSONSEARCH::GetSpecificStringEntry(Translate(""), Translate("starPlusConfig,channelForCOREGrips"), intTrace);
  _blnEject = 0;
  {
    _loopCounter1 = 0;
    while (
       (_seqSource.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, _seqSource, 1);
      _loopCounter1 = _loopCounter1 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("-- Transport cycle: "), _loopCounter1, Translate("/"), _intSeqMaxTransfers);
      _PlateDefinitions(_seqSource, _arrPlateDefinitions);
      if (_loopCounter1 == _intSeqMaxTransfers)
      {
        _blnEject = _blnToolEject;
      }
      if (_strSourceLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            Hamilton_Tilt_Clamp_Module::ClampOpen(devTilt_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampOpen(devTilt_2);
          }
        }
      }
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      if (_strSourceLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(devTilt_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(devTilt_2);
          }
        }
      }
      strBarcode = __GetPlateBarcode(_seqSource, 1, _arrPlateDefinitions.ElementAt( 8 -1));
      if (_strDestinationLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            MECC::TraceComment(Translate("trying to tilt module"));
            Hamilton_Tilt_Clamp_Module::ClampOpen(devTilt_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampOpen(devTilt_2);
          }
        }
      }
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      if (_strDestinationLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(devTilt_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(devTilt_2);
          }
        }
      }
      strLabID = SeqGetLabwareId(_seqSource);
      strPosID = SeqGetPositionId(_seqSource);
      DevSetBarcodeData(ML_STAR, strLabID, strPosID, Translate(""));
      strLabID = SeqGetLabwareId(_seqDestination);
      strPosID = SeqGetPositionId(_seqDestination);
      DevSetBarcodeData(ML_STAR, strLabID, strPosID, strBarcode);
      SeqIncrement(_seqSource, 1);
      SeqIncrement(_seqDestination, 1);
      if (
         (_seqSource.GetCurrentPosition() > 0 && _seqSource.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    _seqSource.SetMax(_seqSource.GetTotal());
    _seqSource.SetCurrentPosition(1);
  }
  _blnFirstTransfer = 1;
  return (_loopCounter1);
  MECC::TraceComment(Translate("==========================================================\n\n                                   CORE Labware Transport - End\n\n=========================================================="));
}

private function _TRP_Iswap( sequence & _seqSource, sequence & _seqDestination, variable _intSeqMaxTransfers, variable _blnToolEject, variable _strSourceLocation, variable _strDestinationLocation, variable & _blnFirstTransfer ) variable {
  private variable strBarcode;
  private variable strLabID;
  private variable _loopCounter1;
  private variable strPosID;
  private variable _arrPlateDefinitions[];
  {
    _loopCounter1 = 0;
    while (
       (_seqSource.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, _seqSource, 1);
      _loopCounter1 = _loopCounter1 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("-- Transport cycle: "), _loopCounter1, Translate("/"), _intSeqMaxTransfers);
      _PlateDefinitions(_seqSource, _arrPlateDefinitions);
      if (_strSourceLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            Hamilton_Tilt_Clamp_Module::ClampOpen(devTilt_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampOpen(devTilt_2);
          }
        }
      }
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      if (_strSourceLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(devTilt_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(devTilt_2);
          }
        }
      }
      strBarcode = __GetPlateBarcode(arrAllSequences.ElementAt( 6 -1), 2, 0);
      if (_strDestinationLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            Hamilton_Tilt_Clamp_Module::ClampOpen(devTilt_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampOpen(devTilt_2);
          }
        }
      }
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      if (_strDestinationLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(devTilt_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(devTilt_2);
          }
        }
      }
      strLabID = SeqGetLabwareId(_seqSource);
      strPosID = SeqGetPositionId(_seqSource);
      DevSetBarcodeData(ML_STAR, strLabID, strPosID, Translate(""));
      strLabID = SeqGetLabwareId(_seqDestination);
      strPosID = SeqGetPositionId(_seqDestination);
      DevSetBarcodeData(ML_STAR, strLabID, strPosID, strBarcode);
      SeqIncrement(_seqSource, 1);
      SeqIncrement(_seqDestination, 1);
      if (
         (_seqSource.GetCurrentPosition() > 0 && _seqSource.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    _seqSource.SetMax(_seqSource.GetTotal());
    _seqSource.SetCurrentPosition(1);
  }
  _blnFirstTransfer = 1;
  ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
  return (_loopCounter1);
  MECC::TraceComment(Translate("==========================================================\n\n                                   CORE Labware Transport - End\n\n=========================================================="));
}

private function __VersionControl(  ) void {
}
