 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "load_instructions.hs_" }
 namespace _Method { #include "Hamilton Tilt Clamp Module\\Hamilton Tilt Clamp Module.hsl" }
 namespace _Method { #include "HSL Sias Centrifuge\\HSLSiasCentrifuge.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "WSI\\SCAP_STARplus.hs_" }
 namespace _Method { #include "HSLBarcodeReader.hsl" }
 namespace _Method { #include "WSI\\UV_STARplus.hs_" }
 namespace _Method { #include "Hamilton\\HSLHamiltonMediaFillModule.hsl" }
 namespace _Method { #include "HSL Sias Centrifuge\\HSLSiasCentrifugeEnums.hsl" }
 namespace _Method { #include "HSL Sias Centrifuge\\SiasCentrifuge.hs_" }
#include "STARplus_Deck.res"
variable HHS1;
variable HHS2;
variable rtnHHS;
variable blnSimMode;
variable blnPlateLoaded;
variable blnInit;
timer tmr_HHSCheck;
variable rtnTilt;
timer tmr_TiltCheck;
variable strHHS2_FW;
variable strHHS1_FW;
variable strHHS2_SN;
variable strHHS1_SN;
variable rtnCentrifuge;
global device ML_STAR ("STARplus_Deck.lay", "ML_STAR", hslTrue);
variable strLoadMessage;
sequence seqLoad;
sequence seqTrpSource;
sequence seqTrpDest;
sequence seqTrpDest_HHS;
variable intGripWidth;
variable intGripWidth_Open;
variable intGripHeight;
variable devHepa1;
variable devHepa2;
variable blnLeftFan_State;
variable blnRightTemperature;
variable blnLeftHepaStatus;
variable blnRightLightState;
variable blnLeftFan_Speed;
variable blnLeftDoor;
variable blnRightHumidity;
variable blnLeftTemperature;
variable blnRightDoor;
variable blnLeftPrefilterStatus;
variable blnRightFan_State;
variable blnRightPrefilterStatus;
variable blnLeftLightState;
variable blnRightHepaStatus;
variable blnLeftHumidity;
variable blnRightFan_Speed;
timer tmr_HepaCheck;
timer tmr_UVCheck;
variable intKennyTimeout;
variable strBarcode;
variable devKenny;
variable rtnKenny;
sequence seqTrpDest_Kenny;
variable devClamp1;
variable devClamp2;
variable intClamp2_ID;
variable rtnClamp;
variable intClamp1_ID;
sequence seqTrpDest_Clamp;
variable devCentrifugeName;
timer timer1;
timer timer2;
variable devMediaModule;
variable devMedia1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOAD_INSTRUCTIONS::_InitLibrary();
    SCAP_STARPLUS::_InitLibrary();
    UV_STARPLUS::_InitLibrary();
    SIASCENTRIFUGE::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    blnPlateLoaded = 1;
    blnInit = 0;
    strLoadMessage = Translate("Please load one autoflask onto the highlighted position");
    intKennyTimeout = 3;
    SeqCopySequence(seqLoad, ML_STAR.Greiner_AutoFlask_Loading_0005);
    SeqCopySequence(seqTrpSource, ML_STAR.Greiner_AutoFlask_Loading_0005);
    SeqCopySequence(seqTrpDest, ML_STAR.Greiner_AutoFlask_Active_0001);
    SeqCopySequence(seqTrpDest_Clamp, ML_STAR.Greiner_AutoFlask_Tilt_0001);
    SeqCopySequence(seqTrpDest_HHS, ML_STAR.Greiner_AutoFlask_HHS_0001);
    SeqCopySequence(seqTrpDest_Kenny, ML_STAR.Greiner_AutoFlask_Barcoding_0001);
    intGripHeight = 5;
    intGripWidth = 81;
    intGripWidth_Open = 88;
    devHepa1 = 10;
    devHepa2 = 9;
    devClamp1 = Translate("C1");
    devClamp2 = Translate("C2");
    devKenny = Translate("COM8");
    devCentrifugeName = Translate("Ixion");
    devMediaModule = 4;
    MECC::TraceComment(Translate(">>>>>>>>>> STARplus Initialise <<<<<<<<<<"));
    blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (blnSimMode == 1)
    {
      MECC::TraceComment(Translate("***** Instrument in Sim Mode *****"));
      abort;
    }
    MECC::TraceComment(Translate("***** Instrument will Initialise *****"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    blnInit = 1;
    MECC::TraceComment(Translate(">>>>>>>>>> CO-RE Grip Testing <<<<<<<<<<"));
    Setup();
    MECC::TraceComment(Translate("======== CO-RE Grip Plate Transport ========"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate(">>>>>>>>>> iSWAP Testing <<<<<<<<<<"));
    Setup();
    MECC::TraceComment(Translate("======== iSWAP Plate Transport ========"));
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    MECC::TraceComment(Translate(">>>>>>>>>> HHS Testing <<<<<<<<<<"));
    Setup();
    MECC::TraceComment(Translate("========= HHS will Initialize ========="));
    rtnHHS = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
    if (rtnHHS != 0)
    {
      TrcTrace(Translate(">>>>> rtnHHS = "), rtnHHS);
      MECC::TraceComment(Translate("----- CreateStarDevice command failed -----"));
      rtnHHS = HSLHamHeaterShaker::CreateUsbDevice(1, HHS1);
      if (rtnHHS != 0)
      {
        TrcTrace(Translate(">>>>> rtnHHS = "), rtnHHS);
        MECC::TraceComment(Translate("----- CreateUsbDevice command failed -----"));
        abort;
      }
    }
    HSLHamHeaterShaker::GetFirmwareVersion(HHS1, strHHS1_FW);
    TrcTrace(Translate("----- Hamilton Heater Shaker 1 - Firmware Version = "), strHHS1_FW);
    HSLHamHeaterShaker::GetSerialNumber(HHS1, strHHS1_SN);
    TrcTrace(Translate("----- Hamilton Heater Shaker 1 - Serial Number = "), strHHS1_SN);
    rtnHHS = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 2, HHS2);
    if (rtnHHS != 0)
    {
      TrcTrace(Translate(">>>>> rtnHHS = "), rtnHHS);
      MECC::TraceComment(Translate("----- CreateStarDevice command failed -----"));
      rtnHHS = HSLHamHeaterShaker::CreateUsbDevice(2, HHS2);
      if (rtnHHS != 0)
      {
        TrcTrace(Translate(">>>>> rtnHHS = "), rtnHHS);
        MECC::TraceComment(Translate("----- CreateUsbDevice command failed -----"));
        abort;
      }
    }
    HSLHamHeaterShaker::GetFirmwareVersion(HHS2, strHHS2_FW);
    TrcTrace(Translate("----- Hamilton Heater Shaker 2 - Firmware Version = "), strHHS2_FW);
    HSLHamHeaterShaker::GetSerialNumber(HHS2, strHHS2_SN);
    TrcTrace(Translate("----- Hamilton Heater Shaker 2 - Serial Number = "), strHHS2_SN);
    MECC::TraceComment(Translate("========= Move Plate onto HHS1 ========="));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    rtnHHS = HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
    if (rtnHHS != 0)
    {
      MECC::TraceComment(Translate("----- SetPlateLock command failed -----"));
      abort;
    }
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    rtnHHS = HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
    if (rtnHHS != 0)
    {
      MECC::TraceComment(Translate("----- SetPlateLock command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("========= HHS will Heat ========="));
    rtnHHS = HSLHamHeaterShaker::StartTempCtrl(HHS1, 70, 0);
    if (rtnHHS != 0)
    {
      MECC::TraceComment(Translate("----- StartTempCtrl command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("========= HHS will Shake ========="));
    rtnHHS = HSLHamHeaterShaker::StartShaker(HHS1, 1000);
    if (rtnHHS != 0)
    {
      MECC::TraceComment(Translate("----- StartShaker command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("===== Pause for user check ====="));
    if( 0 == tmr_HHSCheck.SetTimer(5) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("==================\n      User Proceeded\n=================="));
    if( 0 == tmr_HHSCheck.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    rtnHHS = HSLHamHeaterShaker::StopShaker(HHS1);
    if (rtnHHS != 0)
    {
      MECC::TraceComment(Translate("----- StopShaker command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("========= HHS will Stop Heating ========="));
    rtnHHS = HSLHamHeaterShaker::StopTempCtrl(HHS1);
    if (rtnHHS != 0)
    {
      MECC::TraceComment(Translate("----- StopTempCtrl command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("========= Move Plate from HHS1 ========="));
    rtnHHS = HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
    if (rtnHHS != 0)
    {
      MECC::TraceComment(Translate("----- SetPlateLock command failed -----"));
      abort;
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    rtnHHS = HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
    if (rtnHHS != 0)
    {
      MECC::TraceComment(Translate("----- SetPlateLock command failed -----"));
      abort;
    }
    HSLHamHeaterShaker::Terminate();
    MECC::TraceComment(Translate(">>>>>>>>>> HEPA Airflow Testing <<<<<<<<<<"));
    MECC::TraceComment(Translate(">>>>>>>>>> Connect to SCAP <<<<<<<<<<"));
    SCAP_STARPLUS::Connect(devHepa1, devHepa2, 0, blnSimMode);
    MECC::TraceComment(Translate("===============\n     SCAP Checks\n==============="));
    SCAP_STARPLUS::GetDoorState(blnLeftDoor, blnRightDoor);
    SCAP_STARPLUS::GetFanSpeed(blnLeftFan_Speed, blnRightFan_Speed);
    SCAP_STARPLUS::GetFanState(blnLeftFan_State, blnRightFan_State);
    SCAP_STARPLUS::GetHepaFilterStatus(blnLeftHepaStatus, blnRightHepaStatus);
    SCAP_STARPLUS::GetHumidity(blnLeftHumidity, blnRightHumidity);
    SCAP_STARPLUS::GetLightState(blnLeftLightState, blnRightLightState);
    SCAP_STARPLUS::GetPrefilterStatus(blnLeftPrefilterStatus, blnRightPrefilterStatus);
    SCAP_STARPLUS::GetTemperature(blnLeftTemperature, blnRightTemperature);
    MECC::TraceComment(Translate(">>>>>>>>>> Turn SCAPs on <<<<<<<<<<"));
    SCAP_STARPLUS::SetFanState(1);
    SCAP_STARPLUS::SetLightState(1);
    SCAP_STARPLUS::SetFanSpeed(50);
    MECC::TraceComment(Translate("===== Pause for user check ====="));
    if( 0 == tmr_HepaCheck.SetTimer(5) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmr_HepaCheck.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate(">>>>>>>>>>   User Proceeded <<<<<<<<<<<"));
    MECC::TraceComment(Translate("===============\n     SCAP Checks\n==============="));
    SCAP_STARPLUS::GetDoorState(blnLeftDoor, blnRightDoor);
    SCAP_STARPLUS::GetFanSpeed(blnLeftFan_Speed, blnRightFan_Speed);
    SCAP_STARPLUS::GetFanState(blnLeftFan_State, blnRightFan_State);
    SCAP_STARPLUS::GetHepaFilterStatus(blnLeftHepaStatus, blnRightHepaStatus);
    SCAP_STARPLUS::GetHumidity(blnLeftHumidity, blnRightHumidity);
    SCAP_STARPLUS::GetLightState(blnLeftLightState, blnRightLightState);
    SCAP_STARPLUS::GetPrefilterStatus(blnLeftPrefilterStatus, blnRightPrefilterStatus);
    SCAP_STARPLUS::GetTemperature(blnLeftTemperature, blnRightTemperature);
    MECC::TraceComment(Translate(">>>>>>>>>> Turn SCAPs off <<<<<<<<<<"));
    SCAP_STARPLUS::SetFanState(1);
    SCAP_STARPLUS::SetLightState(1);
    SCAP_STARPLUS::SetFanSpeed(50);
    MECC::TraceComment(Translate("===============\n     SCAP Checks\n==============="));
    SCAP_STARPLUS::GetDoorState(blnLeftDoor, blnRightDoor);
    SCAP_STARPLUS::GetFanSpeed(blnLeftFan_Speed, blnRightFan_Speed);
    SCAP_STARPLUS::GetFanState(blnLeftFan_State, blnRightFan_State);
    SCAP_STARPLUS::GetHepaFilterStatus(blnLeftHepaStatus, blnRightHepaStatus);
    SCAP_STARPLUS::GetHumidity(blnLeftHumidity, blnRightHumidity);
    SCAP_STARPLUS::GetLightState(blnLeftLightState, blnRightLightState);
    SCAP_STARPLUS::GetPrefilterStatus(blnLeftPrefilterStatus, blnRightPrefilterStatus);
    SCAP_STARPLUS::GetTemperature(blnLeftTemperature, blnRightTemperature);
    SCAP_STARPLUS::Disconnect();
    Setup();
    MECC::TraceComment(Translate("========= Kenny will Connect ========="));
    rtnKenny = HSLBarcodeReader::SetComPort(devKenny);
    if (rtnKenny != 0)
    {
      MECC::TraceComment(Translate("----- SetComPort command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("========= Set Kenny Error State ========="));
    rtnKenny = HSLBarcodeReader::SetErrorRecovery(2);
    if (rtnKenny != 0)
    {
      MECC::TraceComment(Translate("----- SetErrorRecovery command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("========= Set Kenny Simulation State ========="));
    rtnKenny = HSLBarcodeReader::SetSimulation(blnSimMode);
    if (rtnKenny != 0)
    {
      MECC::TraceComment(Translate("----- SetSimulation command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("========= Set Kenny Timeout ========="));
    rtnKenny = HSLBarcodeReader::SetTimeout(intKennyTimeout);
    if (rtnKenny != 0)
    {
      MECC::TraceComment(Translate("----- SetTimeout command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("========= Read Barcode ========="));
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
    if( 0 == timer1.SetTimer(1) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    strBarcode = HSLBarcodeReader::Read();
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if( 0 == tmr_UVCheck.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    UV_STARPLUS::Lights(1, tmr_UVCheck, ML_STAR);
    MECC::TraceComment(Translate("===== Pause for user check ====="));
    if (blnSimMode == 1)
    {
      if( 0 == tmr_UVCheck.SetTimer(5) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    else
    {
      if( 0 == tmr_UVCheck.SetTimer(hslInfinite) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    if( 0 == tmr_UVCheck.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate(">>>>>>>>>>   User Proceeded <<<<<<<<<<<"));
    UV_STARPLUS::Lights(0, tmr_UVCheck, ML_STAR);
    Setup();
    MECC::TraceComment(Translate("========== Initialise Tilt Modules =========="));
    rtnClamp = Hamilton_Tilt_Clamp_Module::Initialize(0, devClamp1, blnSimMode, 0, intClamp1_ID);
    if (rtnClamp == 0)
    {
      MECC::TraceComment(Translate("----- Initialise command failed -----"));
      abort;
    }
    rtnClamp = Hamilton_Tilt_Clamp_Module::Initialize(0, devClamp2, blnSimMode, 0, intClamp2_ID);
    if (rtnClamp == 0)
    {
      MECC::TraceComment(Translate("----- Initialise command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("========== Load Plate =========="));
    MECC::TraceComment(Translate("========= STARplus will move plate onto Tilt 1 ========="));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    rtnTilt = Hamilton_Tilt_Clamp_Module::ClampOpen(intClamp1_ID);
    if (rtnClamp == 0)
    {
      MECC::TraceComment(Translate("----- ClampOpen command failed -----"));
      abort;
    }
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    rtnTilt = Hamilton_Tilt_Clamp_Module::ClampClose(intClamp1_ID);
    if (rtnClamp == 0)
    {
      MECC::TraceComment(Translate("----- ClampClose command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("========== Sway =========="));
    MECC::TraceComment(Translate("========== Sway Tilt Module 1 =========="));
    rtnClamp = Hamilton_Tilt_Clamp_Module::Sway(intClamp1_ID, 10, 5, 1, 7, 0);
    if (rtnClamp == 0)
    {
      if (blnSimMode == 0)
      {
        MECC::TraceComment(Translate("----- Sway command failed -----"));
        abort;
      }
    }
    MECC::TraceComment(Translate("========== Sway Tilt Module 2 =========="));
    rtnClamp = Hamilton_Tilt_Clamp_Module::Sway(intClamp2_ID, 10, 2, 5, 2, 0);
    if (rtnClamp == 0)
    {
      if (blnSimMode == 0)
      {
        MECC::TraceComment(Translate("----- Sway command failed -----"));
        abort;
      }
    }
    MECC::TraceComment(Translate("========== Tilt =========="));
    MECC::TraceComment(Translate("========== Tilt Tilt Module 1 =========="));
    rtnClamp = Hamilton_Tilt_Clamp_Module::Tilt(intClamp1_ID, 1, 10);
    if (rtnClamp == 0)
    {
      if (blnSimMode == 0)
      {
        MECC::TraceComment(Translate("----- Tilt command failed -----"));
        abort;
      }
    }
    MECC::TraceComment(Translate("========== Tilt Tilt Module 2 =========="));
    rtnClamp = Hamilton_Tilt_Clamp_Module::Tilt(intClamp2_ID, 1, 8);
    if (rtnClamp == 0)
    {
      if (blnSimMode == 0)
      {
        MECC::TraceComment(Translate("----- Tilt command failed -----"));
        abort;
      }
    }
    MECC::TraceComment(Translate("===== Pause for user check ====="));
    if( 0 == tmr_TiltCheck.SetTimer(5) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmr_TiltCheck.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate(">>>>>>>>>>   User Proceeded <<<<<<<<<<<"));
    MECC::TraceComment(Translate("========== Tilt Tilt Module 1 =========="));
    rtnClamp = Hamilton_Tilt_Clamp_Module::Tilt(intClamp1_ID, 1, 0);
    if (rtnClamp == 0)
    {
      if (blnSimMode == 0)
      {
        MECC::TraceComment(Translate("----- Tilt command failed -----"));
        abort;
      }
    }
    MECC::TraceComment(Translate("========== Tilt Tilt Module 2 =========="));
    rtnClamp = Hamilton_Tilt_Clamp_Module::Tilt(intClamp2_ID, 1, 0);
    if (rtnClamp == 0)
    {
      if (blnSimMode == 0)
      {
        MECC::TraceComment(Translate("----- Tilt command failed -----"));
        abort;
      }
    }
    MECC::TraceComment(Translate("========== Unload Plate =========="));
    MECC::TraceComment(Translate("========= STARplus will move plate off of Tilt 1 ========="));
    rtnClamp = Hamilton_Tilt_Clamp_Module::ClampOpen(intClamp1_ID);
    if (rtnClamp == 0)
    {
      MECC::TraceComment(Translate("----- ClampOpen command failed -----"));
      abort;
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    rtnClamp = Hamilton_Tilt_Clamp_Module::ClampClose(intClamp1_ID);
    if (rtnClamp == 0)
    {
      MECC::TraceComment(Translate("----- ClampClose command failed -----"));
      abort;
    }
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("========== Disconnect =========="));
    MECC::TraceComment(Translate("========== Discconect Tilt Module 1 =========="));
    rtnClamp = Hamilton_Tilt_Clamp_Module::Terminate(intClamp1_ID);
    if (rtnClamp == 0)
    {
      MECC::TraceComment(Translate("----- Disconnect command failed -----"));
      abort;
    }
    MECC::TraceComment(Translate("========== Discconect Tilt Module 2 =========="));
    rtnClamp = Hamilton_Tilt_Clamp_Module::Terminate(intClamp2_ID);
    if (rtnClamp == 0)
    {
      MECC::TraceComment(Translate("----- Disconnect command failed -----"));
      abort;
    }
    if(0){
      MECC::TraceComment(Translate("========== Initialise Media Modules =========="));
      HSLHamiltonMediaFillModule::Initialize(devMediaModule, blnSimMode, devMedia1);
      MECC::TraceComment(Translate("===== Set Centrifuge Initialise ====="));
      HSLSiasCentrifuge::SetSimulationMode(blnSimMode);
      MECC::TraceComment(Translate("===== Initialise Centrifuge ====="));
      rtnCentrifuge = SIASCENTRIFUGE::Initialize(121, devCentrifugeName, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
      if (rtnCentrifuge != 0)
      {
        MECC::TraceComment(Translate("----- Initialise command failed -----"));
        abort;
      }
      MECC::TraceComment(Translate("===== Set Position of Centrifuge ====="));
      rtnCentrifuge = SIASCENTRIFUGE::MoveToPosition(121, 1, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
      rtnCentrifuge = HSLSiasCentrifuge::MoveToPosition(121, 1);
      if (rtnCentrifuge != 0)
      {
        MECC::TraceComment(Translate("----- Initialise Tilt command failed -----"));
        abort;
      }
      if( 0 == timer2.SetTimer(3) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("===== Close Cover of Centrifuge ====="));
      rtnCentrifuge = HSLSiasCentrifuge::CloseCover(121);
      if (rtnCentrifuge != 0)
      {
        MECC::TraceComment(Translate("----- Initialise Tilt command failed -----"));
        abort;
      }
      MECC::TraceComment(Translate("===== Spin of Centrifuge ====="));
      rtnCentrifuge = SIASCENTRIFUGE::Spin(121, 10, 100, 10, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
      if (rtnCentrifuge != 0)
      {
        MECC::TraceComment(Translate("----- Initialise Tilt command failed -----"));
        abort;
      }
      MECC::TraceComment(Translate("===== Set Position of Centrifuge ====="));
      rtnCentrifuge = SIASCENTRIFUGE::MoveToPosition(121, 6, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
      rtnCentrifuge = HSLSiasCentrifuge::MoveToPosition(121, 6);
      if (rtnCentrifuge != 0)
      {
        MECC::TraceComment(Translate("----- Initialise Tilt command failed -----"));
        abort;
      }
      if( 0 == timer2.SetTimer(3) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("===== Close Cover of Centrifuge ====="));
      rtnCentrifuge = HSLSiasCentrifuge::CloseCover(121);
      if (rtnCentrifuge != 0)
      {
        MECC::TraceComment(Translate("----- Initialise Tilt command failed -----"));
        abort;
      }
      MECC::TraceComment(Translate("===== Terminate Centrifuge ====="));
      rtnCentrifuge = SIASCENTRIFUGE::Terminate(121);
      if (rtnCentrifuge != 0)
      {
        MECC::TraceComment(Translate("----- Initialise Tilt command failed -----"));
        abort;
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Validation Complete <<<<<<<<<<\n\n\n>>>>>>>>>> Validation Complete <<<<<<<<<<"));
    LOAD_INSTRUCTIONS::_ExitLibrary();
    SCAP_STARPLUS::_ExitLibrary();
    UV_STARPLUS::_ExitLibrary();
    SIASCENTRIFUGE::_ExitLibrary();
  } }
