 namespace _Method { #include "Hamilton\\HSLHamiltonMediaFillModule.hsl" }
 namespace _Method { #include "Hamilton MultiDaisyChainedTiltModuleAmbient\\HSLMultiDaisyChainedTiltModuleAmbient.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSL Sias Centrifuge\\SiasCentrifuge.hs_" }
 namespace _Method { #include "HSL Sias Centrifuge\\HSLSiasCentrifuge.hsl" }
 namespace _Method { #include "HSL Sias Centrifuge\\HSLSiasCentrifugeEnums.hsl" }
#include "wsi\\system check\\TestMethod.res"
variable InstID;
variable HHS1;
variable HHS2;
global device ML_STAR ("wsi\\system check\\TestMethod.lay", "ML_STAR", hslTrue);
variable rtnHamMediaMod;
variable intPumpFillTimeout;
variable intPumpFillSpeed;
variable intPumpID;
variable blnPumpDir;
variable strTilt;
variable rtnTiltStation;
variable rtnHHS;
variable rtnCentrifuge;
timer timer1;
variable rtnValue;
variable devSTAR;
variable blnPump_Fill;
variable blnPump_Drain;
timer timer2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    SIASCENTRIFUGE::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    if(0){
      ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    }
    rtnHHS = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
    if (rtnHHS != 0)
    {
      TrcTrace(Translate("----------------- Connection via StarDevice: "), Translate("Failed"));
      rtnHHS = HSLHamHeaterShaker::CreateUsbDevice(1, HHS1);
      if (rtnHHS != 0)
      {
        TrcTrace(Translate("----------------- Connection via USBDevice: "), Translate("Failed"));
        abort;
      }
      else
      {
        TrcTrace(Translate("----------------- Connection via USBDevice: "), Translate("Success"));
      }
    }
    else
    {
      TrcTrace(Translate("----------------- Connection via StarDevice: "), Translate("Success"));
    }
    rtnHHS = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
    if (rtnHHS != 0)
    {
      TrcTrace(Translate("##### rtnHHS = "), rtnHHS);
      abort;
    }
    rtnHHS = HSLHamHeaterShaker::StartShaker(HHS1, 200);
    if (rtnHHS != 0)
    {
      TrcTrace(Translate("##### rtnHHS = "), rtnHHS);
      abort;
    }
    rtnHHS = HSLHamHeaterShaker::StopShaker(HHS1);
    if (rtnHHS != 0)
    {
      TrcTrace(Translate("##### rtnHHS = "), rtnHHS);
      abort;
    }
    rtnHHS = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS2);
    if (rtnHHS != 0)
    {
      TrcTrace(Translate("##### rtnHHS = "), rtnHHS);
      abort;
    }
    rtnHHS = HSLHamHeaterShaker::StartShaker(HHS2, 200);
    if (rtnHHS != 0)
    {
      TrcTrace(Translate("##### rtnHHS = "), rtnHHS);
      abort;
    }
    rtnHHS = HSLHamHeaterShaker::StopShaker(HHS2);
    if (rtnHHS != 0)
    {
      TrcTrace(Translate("##### rtnHHS = "), rtnHHS);
      abort;
    }
    if(0){
      intPumpFillSpeed = 31;
      intPumpFillTimeout = 1000000;
      blnPump_Fill = 1;
      blnPump_Drain = 0;
      rtnValue = HSLHamiltonMediaFillModule::Initialize(5, 0, devSTAR);
      StepError(rtnValue, Translate("Media Module - Init"));
      intPumpID = 1;
      rtnValue = HSLHamiltonMediaFillModule::SetPumpDirection(devSTAR, intPumpID, blnPump_Drain);
      rtnValue = HSLHamiltonMediaFillModule::SetPumpDirection(devSTAR, intPumpID, blnPump_Fill);
      StepError(rtnValue, Translate("Media Module - SetPumpDirection"));
      if( 0 == timer2.SetTimer(hslInfinite) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      rtnValue = HSLHamiltonMediaFillModule::FillTrough(devSTAR, intPumpID, intPumpFillSpeed, intPumpFillTimeout);
      StepError(rtnValue, Translate("Media Module - Fill Trough"));
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      rtnValue = HSLHamiltonMediaFillModule::WaitForPump(devSTAR, intPumpID);
      StepError(rtnValue, Translate("Media Module - WaitForPump"));
      intPumpID = 2;
      rtnHamMediaMod = HSLHamiltonMediaFillModule::FillTrough(InstID, intPumpID, intPumpFillSpeed, intPumpFillTimeout);
      if (rtnHamMediaMod != 0)
      {
        TrcTrace(Translate("##### rtnHamMediaMod = "), rtnHamMediaMod);
        abort;
      }
      rtnHamMediaMod = HSLHamiltonMediaFillModule::WaitForPump(InstID, intPumpID);
      if (rtnHamMediaMod != 0)
      {
        TrcTrace(Translate("##### rtnHamMediaMod = "), rtnHamMediaMod);
        abort;
      }
      rtnHamMediaMod = HSLHamiltonMediaFillModule::GetPumpDirection(InstID, intPumpID, blnPumpDir);
      if (rtnHamMediaMod != 0)
      {
        TrcTrace(Translate("##### rtnHamMediaMod = "), rtnHamMediaMod);
        abort;
      }
      if (blnPumpDir < 1)
      {
        blnPumpDir = 1;
      }
      else
      {
        blnPumpDir = 0;
      }
      rtnHamMediaMod = HSLHamiltonMediaFillModule::SetPumpDirection(InstID, intPumpID, blnPumpDir);
      if (rtnHamMediaMod != 0)
      {
        TrcTrace(Translate("##### rtnHamMediaMod = "), rtnHamMediaMod);
        abort;
      }
      rtnHamMediaMod = HSLHamiltonMediaFillModule::FillTrough(InstID, intPumpID, intPumpFillSpeed, intPumpFillTimeout);
      if (rtnHamMediaMod != 0)
      {
        TrcTrace(Translate("##### rtnHamMediaMod = "), rtnHamMediaMod);
        abort;
      }
      rtnHamMediaMod = HSLHamiltonMediaFillModule::WaitForPump(InstID, intPumpID);
      if (rtnHamMediaMod != 0)
      {
        TrcTrace(Translate("##### rtnHamMediaMod = "), rtnHamMediaMod);
        abort;
      }
      rtnValue = HSLHamiltonMediaFillModule::Disconnect(devSTAR);
      StepError(rtnValue, Translate("Media Module - Disconnect"));
    }
    if(0){
      rtnTiltStation = HSLMultiDaisyChainedTiltModuleAmbient::InitializeCommunication(1, 7, 2, 0);
      if (rtnTiltStation != 0)
      {
        TrcTrace(Translate("##### rtnTiltStation = "), rtnTiltStation);
        abort;
      }
      strTilt = Translate("T1");
      rtnTiltStation = HSLMultiDaisyChainedTiltModuleAmbient::InitializeTiltModuleAmbient(1, strTilt);
      if (rtnTiltStation != 0)
      {
        TrcTrace(Translate("##### rtnTiltStation = "), rtnTiltStation);
        abort;
      }
      rtnTiltStation = HSLMultiDaisyChainedTiltModuleAmbient::MoveToPosition(1, strTilt, 5);
      if (rtnTiltStation != 0)
      {
        TrcTrace(Translate("##### rtnTiltStation = "), rtnTiltStation);
        abort;
      }
      HSLMultiDaisyChainedTiltModuleAmbient::TerminateTiltModuleAmbient(1, strTilt);
      strTilt = Translate("T2");
      rtnTiltStation = HSLMultiDaisyChainedTiltModuleAmbient::InitializeTiltModuleAmbient(1, strTilt);
      if (rtnTiltStation != 0)
      {
        TrcTrace(Translate("##### rtnTiltStation = "), rtnTiltStation);
        abort;
      }
      rtnTiltStation = HSLMultiDaisyChainedTiltModuleAmbient::MoveToPosition(1, strTilt, 5);
      if (rtnTiltStation != 0)
      {
        TrcTrace(Translate("##### rtnTiltStation = "), rtnTiltStation);
        abort;
      }
      HSLMultiDaisyChainedTiltModuleAmbient::TerminateTiltModuleAmbient(1, strTilt);
    }
    if(0){
      rtnCentrifuge = SIASCENTRIFUGE::Initialize(121, Translate("1MBit"), HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
      TrcTrace(Translate("///// rtnCentrifuge = "), rtnCentrifuge);
      rtnCentrifuge = SIASCENTRIFUGE::MoveToPosition(121, 1, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
      TrcTrace(Translate("///// rtnCentrifuge = "), rtnCentrifuge);
      if( 0 == timer1.SetTimer(10) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      rtnCentrifuge = SIASCENTRIFUGE::MoveToPosition(121, 11, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
      TrcTrace(Translate("///// rtnCentrifuge = "), rtnCentrifuge);
      if( 0 == timer1.SetTimer(10) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLSiasCentrifuge::CloseCover(121);
      if( 0 == timer1.SetTimer(10) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      rtnCentrifuge = SIASCENTRIFUGE::Terminate(121);
      TrcTrace(Translate("///// rtnCentrifuge = "), rtnCentrifuge);
    }
    if(0){
    }
    if(0){
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
    }
    SIASCENTRIFUGE::_ExitLibrary();
  } }
