private function A_MethodInit( variable intTraceLevel ) void ;
private function B_TestingFileGeneration(  ) void ;
private function C_FindPendingRequest(  ) variable ;
private function D_SequenceCreation(  ) void ;
private function E_LoadInstructions(  ) void ;
private function G_PipettingSteps(  ) void ;
private function H_MethodEnd(  ) void ;
private function _CycleSystem(  ) void ;
private function _LabwareSettings( sequence & seq, variable blnTransportType, variable & intGripHeight, variable & intGripWidth, variable & intGripWidthOpen, variable & intGripSpeed, variable & intZSpeed_Get, variable & intZSpeed_Place, variable intXAcceleration ) void ;
private function _LabwareTransport( sequence & seqSource, sequence & seqDestination, sequence & seqLid_Source, sequence & seqLid_Dest, variable blnCOREGrips, variable blnEjectGrips, variable intLidTrip, variable strMessage ) void ;
private function _PIP_AddMedia( sequence & seqDestination, variable intVol, variable strLC, variable strChannelPattern, variable intDestLoopPos ) void ;
private function _PIP_RemoveMediaToWaste( sequence & seqSource, variable intVol, variable strLC, variable strChannelPattern, variable intSrcLoopPos ) void ;
private function _RetrieveBarcode( variable blnCOREGrips, variable intXAcceleration, variable & strBarcode, sequence & seqSource ) variable ;
private function _StepSuccess( variable _rtnStepSuccess ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private timer tmr;
  if(0){
    AswStatusDialog::Terminate();
    SCAP_STARPLUS::Disconnect();
    UV_STARPLUS::Lights(0, tmr, ML_STAR);
  }
}

private function A_MethodInit( variable intTraceLevel ) void {
  private variable rtnValue;
  private variable strUserEmail; // Pulled from the DB. Generated by IdentifyCurrentUser in A_MethodInit
  private variable intFanSpeed; // Pulled from the JSON, used to set the SCAP fan speed
  private timer tmrHepaFan; // Timer associated with how long the HEPA filters have been running
  private variable rtnSuccess;
  private dialog customDialog_1;
  private variable blnSCAPTraceLevel;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                         Method Initialisation - Start\n\n******************************************************************************************************************************************************"));
  blnFirstTrigger = 1;
  blnTesting = 1;
  TRACELEVEL::SetTraceLevel(intTraceLevel);
  MECC::TraceComment(Translate("********** Create AswStatusDialog **********"));
  rtnSuccess = SANGERGENERAL::StatusDisplay_Init(0);
  if (rtnSuccess == 0)
  {
    abort;
  }
  MECC::TraceComment(Translate("********** Identify User **********"));
  rtnSuccess = SANGERGENERAL::IdentifyCurrentUser(blnTesting, strUsersPreferredName, blnAdmin, strUserEmail);
  if (rtnSuccess == 0)
  {
    MECC::TraceComment(Translate("===== Could not identify user. Method will abort ====="));
    abort;
  }
  MECC::TraceComment(Translate("********** Simulation Mode **********"));
  blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- blnSimMode = "), blnSimMode);
  if (blnSimMode == 1)
  {
    SANGERGENERAL::StatusDisplay_Update(Translate("Hamilton is in: "), Translate("Simulation Mode"), 0);
    if (blnAdmin == 0)
    {
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      if (rtnValue == 2)
      {
        MECC::TraceComment(Translate("User has decided to abort the method"));
        abort;
      }
    }
  }
  else
  {
    SANGERGENERAL::StatusDisplay_Update(Translate("Hamilton is in: "), Translate("Instrument Mode"), 0);
  }
  MECC::TraceComment(Translate("********** Email Settings **********"));
  MECC::TraceComment(Translate("********** SCAPs **********"));
  blnSCAPTraceLevel = 0;
  SCAP_STARPLUS::Connect(9, 10, blnSCAPTraceLevel, blnSimMode);
  SANGERGENERAL::StatusDisplay_Update(Translate("Hamilton SCAPs: "), Translate("On"), 0);
  intFanSpeed = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("fanSpeed"), Translate(""));
  SCAP_STARPLUS::SetFanSpeed(intFanSpeed);
  SCAP_STARPLUS::SetFanState(1);
  if( 0 == tmrHepaFan.SetTimer(hslInfinite) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                           Method Initialisation - End\n\n******************************************************************************************************************************************************"));
}

private function B_TestingFileGeneration(  ) void {
  private variable blnDirectoryExists;
  private variable blnReturn;
  private variable intNumberOfPendingSimRequestFiles;
  private variable loopCounter3;
  private variable arrPendingSimFilePaths[];
  private variable intNumberOfActiveRequestFiles;
  private variable arrActiveRequestFilePaths[];
  private variable blnDeletePastPendingFiles;
  private variable strMethodFolderPath;
  private variable strSimWorklistGenerator;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                            Generate Testing Files - Start\n\n******************************************************************************************************************************************************"));
  arrActiveRequestFilePaths.SetSize(0);
  strMethodFolderPath = GetMethodFolder(0);
  strActiveRequestFolderPath = StrConcat2(strMethodFolderPath, Translate("Request Files\\"));
  blnDirectoryExists = FileDirectoryLib::CheckIfDirectoryExists(strActiveRequestFolderPath);
  if (blnDirectoryExists == 0)
  {
    FileDirectoryLib::CreateDirectory(strActiveRequestFolderPath);
  }
  FileDirectoryLib::GetFilesInDirectory(strActiveRequestFolderPath, Translate("*"), arrActiveRequestFilePaths);
  intNumberOfActiveRequestFiles=arrActiveRequestFilePaths.GetSize();
  if (intNumberOfActiveRequestFiles != 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("///// intNumberOfActiveRequestFiles = "), intNumberOfActiveRequestFiles);
    {
      for(loopCounter3 = 0; loopCounter3 < intNumberOfActiveRequestFiles;)
      {
        loopCounter3 = loopCounter3 + 1;
        blnReturn = FileDirectoryLib::DeleteFile(arrActiveRequestFilePaths.ElementAt( loopCounter3 -1));
        if (blnReturn == 1)
        {
          MECC::TraceComment(Translate("Error deleting past active files"));
          abort;
        }
      }
    }
    SANGERGENERAL::StatusDisplay_Update(Translate("Cleared previously active requests"), Translate(""), 1);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- Cleared previous request files"), Translate(""));
  if (blnTesting == 0)
  {
    MECC::TraceComment(Translate("===============================================================\n                                   Method is in production mode.\n                               Simluation files will not be generated\n==============================================================="));
  }
  else
  {
    MECC::TraceComment(Translate("===============================================================\n                                       Method is in testing mode.\n                                 Simluation files will be generated\n==============================================================="));
    blnDeletePastPendingFiles = Translate("True");
    arrPendingSimFilePaths.SetSize(0);
    strPendingSimFolderPath = StrConcat2(strActiveRequestFolderPath, Translate("Pending Files\\"));
    FileDirectoryLib::GetFilesInDirectory(strPendingSimFolderPath, Translate("*"), arrPendingSimFilePaths);
    intNumberOfPendingSimRequestFiles=arrPendingSimFilePaths.GetSize();
    if (blnDeletePastPendingFiles == "True")
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### intNumberOfPendingSimRequestFiles = "), intNumberOfPendingSimRequestFiles);
      if (intNumberOfPendingSimRequestFiles != 0)
      {
        MECC::TraceComment(Translate("Previous Pending Sim file present. To be deleted"));
        {
          for(loopCounter3 = 0; loopCounter3 < intNumberOfPendingSimRequestFiles;)
          {
            loopCounter3 = loopCounter3 + 1;
            if(0){
              blnReturn = FileDirectoryLib::DeleteFile(arrPendingSimFilePaths.ElementAt( loopCounter3 -1));
            }
            if (blnReturn == 1)
            {
              MECC::TraceComment(Translate("Error deleting past Pending files"));
              abort;
            }
          }
        }
      }
      FileDirectoryLib::GetFilesInDirectory(strPendingSimFolderPath, Translate("*"), arrPendingSimFilePaths);
      intNumberOfPendingSimRequestFiles=arrPendingSimFilePaths.GetSize();
    }
    SANGERGENERAL::StatusDisplay_Update(Translate("Method will generate simulation worklist files"), Translate(""), 0);
    if (intNumberOfPendingSimRequestFiles == 0)
    {
      strSimWorklistGenerator = StrConcat2(strMethodFolderPath, Translate("Resources\\CSVGenerator.bat"));
      {
        if( 0 == Shell(strSimWorklistGenerator, hslShow, hslSynchronous) )
        {
              MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      MECC::TraceComment(Translate("random worklists have been generated"));
    }
    else
    {
      MECC::TraceComment(Translate("********** Simulation worklists already present **********"));
    }
  }
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                            Generate Testing Files - End\n\n******************************************************************************************************************************************************"));
}

private function C_FindPendingRequest(  ) variable {
  private variable arrPendingRequestFiles[];
  private variable intArrayPendingRequestFiles_Size;
  private variable loopCounter1;
  private timer timer1;
  private variable strActiveRequestFilePath;
  private variable blnSuccess;
  private file hndWorklist;
  private variable arrWorklist_Processes[];
  private variable arrWorklist_DestinationWellVolumes[];
  private variable arrWorklist_Dates[];
  private variable arrWorklist_SourceWellVolumes[];
  private variable loopCounter2;
  private variable strPendingFolderPath;
  private variable hndWorklist_Process;
  private variable hndWorklist_Date;
  private variable hndWorklist_SourceBarcode;
  private variable hndWorklist_DestinationBarcode;
  private variable intNumberOfUniqueProcesses;
  private variable arrProcesses_Unique[];
  private variable strWorklistDate;
  private variable intNumberOfUniqueDates;
  private variable strCurrentDate;
  private variable arrDates_Unique[];
  private variable rtnValue;
  private variable blnError;
  private variable strDate_FolderFormat;
  private variable strArchiveFolderPath;
  private variable intNumberOfPreviousRunsToday;
  private variable arrArchiveFolderPaths[];
  private variable strArchiveFilePath;
  private variable arr[];
  private variable strDescription;
  private variable blnPass;
  private variable intNumberOfApprovedProcesses;
  private variable strPossibleProcess;
  private variable loopCounter3;
  private variable arrApprovedProcesses[];
  private variable strProcessConfig;
  private variable hndWorklist_SourceWellID;
  private variable strWorklistProcess;
  private variable hndWorklist_DestinationLabwareType;
  private variable hndWorklist_DestinationWellID;
  private variable hndWorklist_SourceLabwareType;
  private variable strWorklistDestinationLabware;
  private variable strWorklistSourceLabware;
  private variable arrWorklist_DestinationLabwareTypes[];
  private variable arrWorklist_SourceLabwareTypes[];
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Find Pending Request - Start\n\n******************************************************************************************************************************************************"));
  strPendingFolderPath = StrConcat2(strActiveRequestFolderPath, Translate("Pending Files\\"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### strPendingFolderPath = "), strPendingFolderPath);
  arrPendingRequestFiles.SetSize(0);
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      FileDirectoryLib::GetFilesInDirectory(strPendingFolderPath, Translate("*.*"), arrPendingRequestFiles);
      intArrayPendingRequestFiles_Size=arrPendingRequestFiles.GetSize();
      if (intArrayPendingRequestFiles_Size >= 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- Request File Identified: "), arrPendingRequestFiles.ElementAt( 1 -1));
        break;
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - "), Translate(""));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("No worklist found: "), strPendingFolderPath);
        if( 0 == timer1.SetTimer(5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (loopCounter1 >= 3)
        {
          if (lpCount > 1)
          {
            return (1);
          }
        }
      }
    }
  }
  SANGERGENERAL::StatusDisplay_Update(Translate("Identified Pending Worklist File"), Translate(""), 0);
  strActiveRequestFilePath = StrConcat2(strActiveRequestFolderPath, Translate("ActiveRequest.csv"));
  if (blnTesting == 1)
  {
    blnSuccess = FileDirectoryLib::CopyFile(arrPendingRequestFiles.ElementAt( 1 -1), strActiveRequestFilePath);
  }
  else
  {
    blnSuccess = FileDirectoryLib::MoveFile(arrPendingRequestFiles.ElementAt( 1 -1), strActiveRequestFilePath);
  }
  if (blnSuccess == 1)
  {
    MECC::TraceComment(Translate("MoveFile of HSLFileDirectoryLib had an error"));
  }
  else
  {
    MECC::TraceComment(Translate("First pending file moved to active file location"));
  }
  blnError = 0;
  arrWorklist_SourceBarcodes.SetSize(0);
  arrWorklist_DestinationBarcodes.SetSize(0);
  arrWorklist_Dates.SetSize(0);
  arrWorklist_Processes.SetSize(0);
  arrWorklist_SourceWellIDs.SetSize(0);
  arrWorklist_DestinationWellIDs.SetSize(0);
  arrWorklist_SourceLabwareTypes.SetSize(0);
  arrWorklist_DestinationLabwareTypes.SetSize(0);
  hndWorklist.AddField("Source Barcode", hndWorklist_SourceBarcode, hslString, 255);
  hndWorklist.AddField("Source Well ID", hndWorklist_SourceWellID, hslString, 255);
  hndWorklist.AddField("Source Labware ID", hndWorklist_SourceLabwareType, hslString, 255);
  hndWorklist.AddField("Destination Barcode", hndWorklist_DestinationBarcode, hslString, 255);
  hndWorklist.AddField("Destination Well ID", hndWorklist_DestinationWellID, hslString, 255);
  hndWorklist.AddField("Destination Labware ID", hndWorklist_DestinationLabwareType, hslString, 255);
  hndWorklist.AddField("Date", hndWorklist_Date, hslString, 8);
  hndWorklist.AddField("Process", hndWorklist_Process, hslString, 255);
  hndWorklist.SetDelimiter(hslCSVDelimited);
  if( 0 == hndWorklist.Open(strActiveRequestFilePath, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strActiveRequestFilePath, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (hndWorklist.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == hndWorklist.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>>>>> Worklist Line Count = "), loopCounter2);
      strWorklistProcess = SANGERGENERAL::WorklistEntryValidation(hndWorklist_Process, 1);
      if (strWorklistProcess == "error")
      {
        break;
      }
      arrWorklist_Processes.AddAsLast(strWorklistProcess);
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("----- strWorklistProcess = "), strWorklistProcess, Translate(" (Changed from '"), hndWorklist_Process, Translate("')"), Translate(""));
      SANGERGENERAL::WorklistEntryValidation(hndWorklist_SourceBarcode, 0);
      arrWorklist_SourceBarcodes.AddAsLast(hndWorklist_SourceBarcode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_SourceBarcode = "), hndWorklist_SourceBarcode);
      SANGERGENERAL::WorklistEntryValidation(hndWorklist_DestinationBarcode, 0);
      arrWorklist_DestinationBarcodes.AddAsLast(hndWorklist_DestinationBarcode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_DestinationBarcode = "), hndWorklist_DestinationBarcode);
      SANGERGENERAL::WorklistEntryValidation(hndWorklist_Date, 0);
      arrWorklist_Dates.AddAsLast(hndWorklist_Date);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_Date = "), hndWorklist_Date);
      SANGERGENERAL::WorklistEntryValidation(hndWorklist_SourceWellID, 0);
      arrWorklist_SourceWellIDs.AddAsLast(hndWorklist_SourceWellID);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_SourceWellID = "), hndWorklist_SourceWellID);
      SANGERGENERAL::WorklistEntryValidation(hndWorklist_DestinationWellID, 0);
      arrWorklist_DestinationWellIDs.AddAsLast(hndWorklist_DestinationWellID);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_DestinationWellID = "), hndWorklist_DestinationWellID);
      strWorklistSourceLabware = SANGERGENERAL::WorklistEntryValidation(hndWorklist_SourceLabwareType, 1);
      arrWorklist_SourceLabwareTypes.AddAsLast(strWorklistSourceLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- strWorklistSourceLabware = "), strWorklistSourceLabware);
      strWorklistDestinationLabware = SANGERGENERAL::WorklistEntryValidation(hndWorklist_DestinationLabwareType, 1);
      arrWorklist_DestinationLabwareTypes.AddAsLast(strWorklistDestinationLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- strWorklistDestinationLabware = "), strWorklistDestinationLabware);
    }
  }
  if( 0 != hndWorklist.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndWorklist.RemoveFields();
  intWorklistLineCount=arrWorklist_SourceBarcodes.GetSize();
  strDescription = Translate("Full Trace of the provided worklist");
  TRACEARRAY::TraceArray(strDescription, arrWorklist_SourceBarcodes, arrWorklist_SourceWellIDs, arrWorklist_SourceWellVolumes, arrWorklist_SourceLabwareTypes, arrWorklist_DestinationBarcodes, arrWorklist_DestinationWellIDs, arrWorklist_DestinationWellVolumes, arrWorklist_DestinationLabwareTypes, arrWorklist_Dates, arrWorklist_Processes, arr, arr, arr, arr, arr, arr);
  MECC::TraceComment(Translate("===========================================\n          Consolidate worklist into relevant information\n==========================================="));
  SANGERGENERAL::StatusDisplay_Update(Translate("---------- Performing Worklist Checks ----------"), Translate(""), 0);
  arrProcesses_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_Processes, arrProcesses_Unique, 0);
  intNumberOfUniqueProcesses=arrProcesses_Unique.GetSize();
  if (intNumberOfUniqueProcesses > 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Hamilton has identified too many processes in the active worklist. "), Translate("Please copy the worklist and split the processes types into individual worklists"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Active worklist can be found here: "), strActiveRequestFilePath);
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many process types in worklist"), Translate(""), 0);
    abort;
  }
  strProcessType = arrProcesses_Unique.ElementAt( 1 -1);
  JSONSEARCH::GetEveryEntry(Translate(""), Translate("approvedProcessConfig"), arrApprovedProcesses);
  intNumberOfApprovedProcesses=arrApprovedProcesses.GetSize();
  blnPass = Translate("False");
  {
    for(loopCounter3 = 0; loopCounter3 < intNumberOfApprovedProcesses;)
    {
      loopCounter3 = loopCounter3 + 1;
      strPossibleProcess=arrApprovedProcesses.GetAt(loopCounter3-1);
      if (strPossibleProcess == strProcessType)
      {
        blnPass = Translate("True");
      }
    }
  }
  if (blnPass != "True")
  {
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- strProcessType: "), strProcessType);
  SANGERGENERAL::StatusDisplay_Update(Translate("Process Type: "), strProcessType, 0);
  arrDates_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_Dates, arrDates_Unique, 0);
  intNumberOfUniqueDates=arrDates_Unique.GetSize();
  if (intNumberOfUniqueDates > 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// The date stamp of each process does not match. "), Translate(" Please ensure you are using a up-to-date worklist, and all processes are scheduled for the same day"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Active worklist can be found here: "), strActiveRequestFilePath);
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many different dates in worklist"), Translate(""), 0);
    abort;
  }
  strWorklistDate = arrDates_Unique.ElementAt( 1 -1);
  strCurrentDate = TimGetFormattedDate(Translate("%d/%m/%Y"));
  if (strWorklistDate != strCurrentDate)
  {
    if (blnAdmin != 1)
    {
      abort;
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- strWorklistDate =  "), strWorklistDate);
  SANGERGENERAL::StatusDisplay_Update(Translate("Worklist Date: "), strWorklistDate, 0);
  MECC::TraceComment(Translate("Check the labware types"));
  MECC::TraceComment(Translate("Check the labware well IDs"));
  strProcessConfig = StrConcat2(strProcessType, Translate("Config"));
  strProcessConfig = StrConcat2(strProcessType, Translate("Config"));
  intMaxSourcePlateNumber = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), strProcessConfig, Translate("maxSourcePlateNumber"));
  arrWorklist_SourceBarcodes_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_SourceBarcodes, arrWorklist_SourceBarcodes_Unique, 0);
  intNumberOfSourcePlates=arrWorklist_SourceBarcodes_Unique.GetSize();
  if (intNumberOfSourcePlates > intMaxSourcePlateNumber)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("########################################################"), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Hamilton has identified too many source plates in the worklist. "), Translate("Please copy the worklist and split the number of unique source plates down"));
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many source plates in the worklist"), Translate(""), 0);
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- intNumberOfSourcePlates = "), intNumberOfSourcePlates);
  Util2::Debug::TraceArray(Translate(" ----- Unique Source Barcodes from the Worklist ----- "), arrWorklist_SourceBarcodes_Unique);
  SANGERGENERAL::StatusDisplay_Update(Translate("Number of Source Plates: "), intNumberOfSourcePlates, 0);
  strProcessConfig = StrConcat2(strProcessType, Translate("Config"));
  intMaxDestinationPlateNumber = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), strProcessConfig, Translate("maxDestinationPlateNumber"));
  arrWorklist_DestinationBarcodes_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_DestinationBarcodes, arrWorklist_DestinationBarcodes_Unique, 0);
  intNumberOfDestinationPlates=arrWorklist_DestinationBarcodes_Unique.GetSize();
  if (intNumberOfDestinationPlates > intMaxDestinationPlateNumber)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("########################################################"), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Hamilton has identified too many Destination plates in the worklist. "), Translate("Please copy the worklist and split the number of unique Destination plates down"));
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many destination plates in the worklist"), Translate(""), 0);
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### intNumberOfDestinationPlates = "), intNumberOfDestinationPlates);
  Util2::Debug::TraceArray(Translate(" ----- Unique Destination Barcodes from the Worklist ----- "), arrWorklist_DestinationBarcodes_Unique);
  SANGERGENERAL::StatusDisplay_Update(Translate("Number of Destination Plates: "), intNumberOfDestinationPlates, 0);
  strDate_FolderFormat = TimGetFormattedDate(Translate("%Y_%m_%d"));
  strArchiveFolderPath = StrConcat4(strActiveRequestFolderPath, Translate("Archive\\"), strDate_FolderFormat, Translate("\\"));
  rtnValue = FileDirectoryLib::CheckIfDirectoryExists(strArchiveFolderPath);
  if (rtnValue == 0)
  {
    FileDirectoryLib::CreateDirectory(strArchiveFolderPath);
  }
  arrArchiveFolderPaths.SetSize(0);
  FileDirectoryLib::GetSubdirectoriesOfDirectory(strArchiveFolderPath, arrArchiveFolderPaths);
  intNumberOfPreviousRunsToday=arrArchiveFolderPaths.GetSize();
  if (lpCount == 1)
  {
    intCurrentRunNumber = intNumberOfPreviousRunsToday + 1;
  }
  else
  {
    intCurrentRunNumber = intNumberOfPreviousRunsToday;
  }
  strCurrentRunFolderPath = StrConcat4(strArchiveFolderPath, Translate("Run "), intCurrentRunNumber, Translate("\\"));
  rtnValue = FileDirectoryLib::CheckIfDirectoryExists(strCurrentRunFolderPath);
  if (rtnValue == 0)
  {
    FileDirectoryLib::CreateDirectory(strCurrentRunFolderPath);
  }
  strArchiveFilePath = StrConcat4(strCurrentRunFolderPath, Translate(""), lpCount, Translate("_OriginalWorklist.csv"));
  FileDirectoryLib::MoveFile(strActiveRequestFilePath, strArchiveFilePath);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- Worklist successfully moved to archive folder: "), strArchiveFilePath);
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                     Find Pending Request - End\n\n******************************************************************************************************************************************************"));
  return (0);
}

private function G_PipettingSteps(  ) void {
  private variable loopCounter1;
  private variable intNumberOfLoops;
  private variable intSeqStart;
  private variable intSeqEnd;
  private variable fltNumberOfLoops;
  private variable intModulusPlates;
  private variable strChannelPattern;
  private variable loopCounter2;
  SANGERGENERAL::StatusDisplay_Update(Translate("===== Pipetting steps to begin ====="), Translate(""), 0);
  blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_1000ulFiltered, Translate("TipCounter_1mLFiltered"), 8);
  if (strProcessType == "mediachange")
  {
    fltNumberOfLoops = intNumberOfSourcePlates / (2 * 1.0);
    intNumberOfLoops = MthCeiling(fltNumberOfLoops);
    intModulusPlates = intNumberOfSourcePlates % 2;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### intNumberOfLoops = "), intNumberOfLoops);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### intModulusPlates = "), intModulusPlates);
    seqTransport_Loading_Src.SetCount(intNumberOfSourcePlates);
    seqTransport_Active_Src.SetCount(intNumberOfSourcePlates);
    _LabwareTransport(seqTransport_Loading_Src, seqTransport_Active_Src, ML_STAR.Waste, ML_STAR.Waste, 1, 1, 0, Translate("Labware to Active Area"));
    {
      for(loopCounter1 = 0; loopCounter1 < intNumberOfLoops;)
      {
        loopCounter1 = loopCounter1 + 1;
        SANGERGENERAL::StatusDisplay_Update(Translate("Media Change - cycle no."), loopCounter1, 0);
        if (loopCounter1 == intNumberOfLoops)
        {
          if (intModulusPlates == 1)
          {
            strChannelPattern = Translate("10000");
          }
          else
          {
            strChannelPattern = Translate("11000");
          }
        }
        else
        {
          strChannelPattern = Translate("11000");
        }
        intSeqEnd = loopCounter1 * 2;
        intSeqStart = intSeqEnd - 1;
        seqTransport_Active_Src.SetCount(intSeqEnd);
        seqTransport_Active_Src.SetCurrentPosition(intSeqStart);
        if (loopCounter1 == intNumberOfLoops)
        {
          if (intModulusPlates == 1)
          {
            seqTransport_Active_Src.SetCount(intNumberOfSourcePlates);
            seqTransport_Active_Src.SetCurrentPosition(intNumberOfSourcePlates);
            seqTransport_TiltStation.SetCount(1);
            seqTransport_TiltStation.SetCurrentPosition(1);
            seqTransport_LidTilt.SetCount(1);
            seqTransport_LidTilt.SetCurrentPosition(1);
            seqTransport_LidPark.SetCount(1);
            seqTransport_LidPark.SetCurrentPosition(1);
          }
        }
        _LabwareTransport(seqTransport_Active_Src, seqTransport_TiltStation, seqTransport_LidTilt, seqTransport_LidPark, 1, 0, 1, Translate("Labware to Tilt Station - "));
        if (loopCounter1 == intNumberOfLoops)
        {
          if (intModulusPlates == 1)
          {
            seqPipetting_TiltStation.SetCount(1);
          }
        }
        strLC_4mL = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("mediachangeConfig"), Translate("liquid4mL"));
        intSourceWellVolume = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("mediachangeConfig"), Translate("transferVolume"));
        _PIP_RemoveMediaToWaste(seqPipetting_TiltStation, intSourceWellVolume, strLC_4mL, strChannelPattern, loopCounter1);
        if (loopCounter1 == intNumberOfLoops)
        {
          if (intModulusPlates == 1)
          {
            seqPipetting_TiltStation.SetCount(1);
          }
        }
        intDestinationWellVolume = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("mediachangeConfig"), Translate("transferVolume"));
        _PIP_AddMedia(seqPipetting_TiltStation, intDestinationWellVolume, strLC_4mL, strChannelPattern, loopCounter1);
        intSeqEnd = loopCounter1 * 2;
        intSeqStart = intSeqEnd - 1;
        seqTransport_Active_Src.SetCount(intSeqEnd);
        seqTransport_Active_Src.SetCurrentPosition(intSeqStart);
        if (loopCounter1 == intNumberOfLoops)
        {
          if (intModulusPlates == 1)
          {
            seqTransport_Active_Src.SetCount(intNumberOfSourcePlates);
            seqTransport_Active_Src.SetCurrentPosition(intNumberOfSourcePlates);
            seqTransport_TiltStation.SetCount(1);
            seqTransport_TiltStation.SetCurrentPosition(1);
            seqTransport_LidTilt.SetCount(1);
            seqTransport_LidTilt.SetCurrentPosition(1);
            seqTransport_LidPark.SetCount(1);
            seqTransport_LidPark.SetCurrentPosition(1);
          }
        }
        _LabwareTransport(seqTransport_TiltStation, seqTransport_Active_Src, seqTransport_LidPark, seqTransport_LidTilt, 1, 0, 2, Translate("Labware from Tilt Station - "));
      }
    }
    SeqResetSequenceIndexes(seqTransport_Active_Src);
    SeqResetSequenceIndexes(seqTransport_Loading_Src);
    seqTransport_Loading_Src.SetCount(intNumberOfSourcePlates);
    seqTransport_Active_Src.SetCount(intNumberOfSourcePlates);
    _LabwareTransport(seqTransport_Active_Src, seqTransport_Loading_Src, ML_STAR.Waste, ML_STAR.Waste, 1, 0, 0, Translate("Labware to Loading Area - "));
  }
  strChannelPattern = Translate("11000");
  if (strProcessType == "passage")
  {
    SANGERGENERAL::StatusDisplay_Update(Translate("===== Passage ====="), Translate(""), 0);
    fltNumberOfLoops = intNumberOfSourcePlates / (2 * 1.0);
    intNumberOfLoops = MthCeiling(fltNumberOfLoops);
    intModulusPlates = intNumberOfSourcePlates % 2;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### intNumberOfLoops = "), intNumberOfLoops);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### intModulusPlates = "), intModulusPlates);
    MECC::TraceComment(Translate("********** Transport:: Loading to Active **********"));
    seqTransport_Loading_Src.SetCount(intNumberOfSourcePlates);
    seqTransport_Active_Src.SetCount(intNumberOfSourcePlates);
    seqTransport_Loading_Dest.SetCount(intNumberOfDestinationPlates);
    seqTransport_Active_Dest.SetCount(intNumberOfDestinationPlates);
    _LabwareTransport(seqTransport_Loading_Src, seqTransport_Active_Src, ML_STAR.Waste, ML_STAR.Waste, 1, 1, 0, Translate("Labware to Active Area - "));
    {
      for(loopCounter2 = 0; loopCounter2 < intNumberOfLoops;)
      {
        loopCounter2 = loopCounter2 + 1;
        MECC::TraceComment(Translate("********** Transport:: A-B Active to A-B Tilt **********"));
        intSeqEnd = loopCounter2 * 2;
        intSeqStart = intSeqEnd - 1;
        seqTransport_Active_Src.SetCount(intSeqEnd);
        seqTransport_Active_Src.SetCurrentPosition(intSeqStart);
        if (loopCounter1 == intNumberOfLoops)
        {
          if (intModulusPlates == 1)
          {
            seqTransport_Active_Src.SetCount(intNumberOfSourcePlates);
            seqTransport_Active_Src.SetCurrentPosition(intNumberOfSourcePlates);
            seqTransport_TiltStation.SetCount(1);
            seqTransport_TiltStation.SetCurrentPosition(1);
            seqTransport_LidTilt.SetCount(1);
            seqTransport_LidTilt.SetCurrentPosition(1);
            seqTransport_LidPark.SetCount(1);
            seqTransport_LidPark.SetCurrentPosition(1);
          }
        }
        _LabwareTransport(seqTransport_Active_Src, seqTransport_TiltStation, seqTransport_LidTilt, seqTransport_LidPark, 1, 0, 1, Translate("Labware to Tilt Station - "));
        MECC::TraceComment(Translate("********** Pipetting:: Remove Media **********"));
        if (loopCounter1 == intNumberOfLoops)
        {
          if (intModulusPlates == 1)
          {
            if (strSourceLabwareID == "greinerfourwell")
            {
              seqPipetting_TiltStation.SetCount(16);
            }
          }
        }
        _PIP_RemoveMediaToWaste(seqPipetting_TiltStation, intSourceWellVolume, strLC_4mL, strChannelPattern, loopCounter2);
        MECC::TraceComment(Translate("********** Pipetting:: Add Trypsin **********"));
        MECC::TraceComment(Translate("********** Transport:: A-B Tilt to A-B Shake **********"));
        if (loopCounter1 == intNumberOfLoops)
        {
          if (intModulusPlates == 1)
          {
            seqTransport_TiltStation.SetCount(1);
            seqTransport_TiltStation.SetCurrentPosition(1);
            seqTransport_LidTilt.SetCount(1);
            seqTransport_LidTilt.SetCurrentPosition(1);
            seqTransport_LidPark.SetCount(1);
            seqTransport_LidPark.SetCurrentPosition(1);
            seqTransport_HHS.SetCount(1);
            seqTransport_HHS.SetCurrentPosition(1);
          }
        }
        _LabwareTransport(seqTransport_TiltStation, seqTransport_HHS, seqTransport_LidPark, seqTransport_LidTilt, 1, 0, 2, Translate("Labware to Shaker"));
        MECC::TraceComment(Translate("********** Shake:: Trypsinisation **********"));
        MECC::TraceComment(Translate("********** Transport:: A-B Shake to A-B Tilt **********"));
        if (loopCounter1 == intNumberOfLoops)
        {
          if (intModulusPlates == 1)
          {
            seqTransport_TiltStation.SetCount(1);
            seqTransport_TiltStation.SetCurrentPosition(1);
            seqTransport_LidTilt.SetCount(1);
            seqTransport_LidTilt.SetCurrentPosition(1);
            seqTransport_LidPark.SetCount(1);
            seqTransport_LidPark.SetCurrentPosition(1);
            seqTransport_HHS.SetCount(1);
            seqTransport_HHS.SetCurrentPosition(1);
          }
        }
        _LabwareTransport(seqTransport_HHS, seqTransport_TiltStation, seqTransport_LidTilt, seqTransport_LidPark, 1, 0, 1, Translate("Labware to Tilt Station - "));
        MECC::TraceComment(Translate("********** Pipetting:: Add Media **********"));
        if (loopCounter1 == intNumberOfLoops)
        {
          if (intModulusPlates == 1)
          {
            if (strSourceLabwareID == "greinerfourwell")
            {
              seqPipetting_TiltStation.SetCount(16);
            }
          }
        }
        _PIP_AddMedia(seqPipetting_TiltStation, intDestinationWellVolume, strLC_4mL, strChannelPattern, loopCounter2);
        MECC::TraceComment(Translate("********** Transport:: B Tilt to Temp **********"));
        MECC::TraceComment(Translate("********** Transport:: Temp  to A Tilt **********"));
      }
    }
    MECC::TraceComment(Translate("********** Transport:: Active to Loading **********"));
    SeqResetSequenceIndexes(seqTransport_Active_Src);
    SeqResetSequenceIndexes(seqTransport_Loading_Src);
    seqTransport_Loading_Src.SetCount(intNumberOfSourcePlates);
    seqTransport_Active_Src.SetCount(intNumberOfSourcePlates);
    _LabwareTransport(seqTransport_Active_Dest, seqTransport_Loading_Dest, ML_STAR.Waste, ML_STAR.Waste, 1, 0, 0, Translate("Labware to Loading Area - "));
  }
}

private function E_LoadInstructions(  ) void {
  private variable intDaysSinceClean;
  private variable strMessage;
  private variable intMaxDaysBetweenUVCycles;
  private variable blnTips_Use1mL;
  private variable blnTips_Use4mL;
  private variable intTipsNeeded_4mL;
  private variable intTipsPerPlate_4mL;
  private variable intTipsNeeded_1mL;
  private variable blnClean;
  private variable intTipsPerPlate_1mL;
  private variable blnCleanType;
  private variable intMaxTimeBetweenDeepCleans;
  private variable strDialogTitle;
  private variable strDialogMessage;
  private variable fltAngle;
  private variable fltX;
  private variable fltY;
  private variable fltZ;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Load Instructions - Start\n\n******************************************************************************************************************************************************"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  if(0){
    blnClean = 0;
    if (lpCount > 1)
    {
    }
    intDaysSinceClean = SANGERGENERAL::GetDaysSinceClean(blnAdmin);
    intMaxDaysBetweenUVCycles = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("maxTimeBetweenUV"), Translate(""));
    if (intDaysSinceClean > intMaxDaysBetweenUVCycles)
    {
      blnClean = 1;
    }
    blnTips_Use1mL = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("mediachangeConfig"), Translate("use1mLTips"));
    intTipsPerPlate_1mL = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("mediachangeConfig"), Translate("tips1mLPerPlate"));
    intTipsNeeded_1mL = intTipsPerPlate_1mL * intNumberOfSourcePlates;
    blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_1000ulFiltered, Translate("TipCounter_1mLFiltered"), intTipsNeeded_1mL);
    if (blnTipReload == 1)
    {
      blnClean = 1;
    }
    blnTips_Use4mL = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("mediachangeConfig"), Translate("use4mLTips"));
    intTipsPerPlate_4mL = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("mediachangeConfig"), Translate("tips4mLPerPlate"));
    intTipsNeeded_4mL = intTipsPerPlate_4mL * intNumberOfSourcePlates;
    blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_4mLFiltered, Translate("TipCounter_4mLFiltered"), intTipsNeeded_4mL);
    if (blnTipReload == 1)
    {
      blnClean = 1;
    }
    if (intDaysSinceClean >= 2)
    {
      blnClean = 1;
    }
    if (blnClean == 0)
    {
      return;
    }
    intMaxTimeBetweenDeepCleans = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("maxTimeBetweenDeepClean"), Translate(""));
    if (intDaysSinceClean <= intMaxTimeBetweenDeepCleans)
    {
      blnCleanType = 1;
      strMessage = Translate("Short clean required");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// "), strMessage);
    }
    else
    {
      blnCleanType = 2;
      strMessage = Translate("Deep clean required");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// "), strMessage);
    }
    SANGERGENERAL::StatusDisplay_Update(strMessage, Translate(""), 0);
    if (blnCleanType >= 1)
    {
      AswStandardDialogs::Initialize();
      AswStandardDialogs::SetDefaultLanguage(AswStandardDialogs::DialogLanguage::English);
      strDialogTitle = StrConcat2(Translate("STARplus - Instrument Cleaning"), Translate(""));
      strImageFilePath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("deckClear"), Translate(""));
      strDialogMessage = StrConcat8(Translate("Please remove all of the carriers from the Hamilton."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\n"), Translate("Press 'Ok' to continue the method"));
      DevGetLabwarePosition(ML_STAR, Translate("RightMostDeckPos"), fltX, fltY, fltZ, fltAngle);
      ML_STAR._55AA8CFA_FB6C_4691_8C8C_8D410E2123FD("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"); // XLMoveToPosition
      strImageFolderPath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("folderPath"), Translate(""));
      strImagePath = StrConcat2(strImageFolderPath, strImageFilePath);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
      AswStandardDialogs::MessageDialogWithImage(strDialogTitle, AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, strDialogMessage, strImagePath, 0);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
      strImageFilePath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("rightDeckClean"), Translate(""));
      strDialogMessage = StrConcat8(Translate("Please clean the right side of the Hamilton"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\n"), Translate("Press 'Ok' to continue the method"));
      ML_STAR._55AA8CFA_FB6C_4691_8C8C_8D410E2123FD("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"); // XLMoveToPosition
      strImageFolderPath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("folderPath"), Translate(""));
      strImagePath = StrConcat2(strImageFolderPath, strImageFilePath);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
      AswStandardDialogs::MessageDialogWithImage(strDialogTitle, AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, strDialogMessage, strImagePath, 0);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
      strImageFilePath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("centrifugeOpen"), Translate(""));
      strDialogMessage = StrConcat8(Translate("Please inspect the centrifuge"), Translate("Wipe the surfaces down if necessary"), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\n"), Translate("Press 'Ok' to continue the method"));
      strImageFolderPath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("folderPath"), Translate(""));
      strImagePath = StrConcat2(strImageFolderPath, strImageFilePath);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
      AswStandardDialogs::MessageDialogWithImage(strDialogTitle, AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, strDialogMessage, strImagePath, 0);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
      SANGERGENERAL::ReloadTips(ML_STAR, ML_STAR.Tips_1000ulFiltered, 0);
      SANGERGENERAL::ReloadTips(ML_STAR, ML_STAR.Tips_4mLFiltered, 0);
      AswStandardDialogs::Terminate();
      UV_STARPLUS::Lights(1, tmrUVLight, ML_STAR);
      frkHandle = Fork("_CycleSystem");
      Trace("----- frkHandle = ", frkHandle);
      if (0 == frkHandle)
      {
           err.Raise(0, "Failed to fork: _CycleSystem");
      }
    }
    if (blnCleanType == 2)
    {
    }
  }
  SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqTransport_Loading_Src, Translate("Please load source plates here"));
  SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Load Instructions - End\n\n******************************************************************************************************************************************************"));
}

private function _LabwareSettings( sequence & seq, variable blnTransportType, variable & intGripHeight, variable & intGripWidth, variable & intGripWidthOpen, variable & intGripSpeed, variable & intZSpeed_Get, variable & intZSpeed_Place, variable intXAcceleration ) void {
  private variable intArrayLabwareIDs_Size;
  private variable strLabwareID;
  private variable intStringLength;
  private variable loopCounter1;
  private variable arrGripHeights[];
  private variable arrGripSpeeds[];
  private variable arrGripWidths[];
  private variable arrGripOpenWidths[];
  private variable arrZSpeed_Places[];
  private variable arrLabwareIDs[];
  private variable arrXAccelerations[];
  private variable arrZSpeed_Gets[];
  private variable strConfigFile;
  private variable intLength;
  private variable intBackslash;
  private variable _loopCounter1;
  private variable intCount;
  private variable intTraceLevel;
  intGripHeight = 0;
  intGripWidth = 0;
  intGripWidthOpen = 0;
  intGripSpeed = 0;
  intZSpeed_Get = 0;
  intZSpeed_Place = 0;
  if(0){
    strLabwareID = SeqGetLabwareId(seq);
    intStringLength = StrGetLength(strLabwareID);
    intStringLength = intStringLength - 5;
    strLabwareID = StrLeft(strLabwareID, intStringLength);
    Trace("strLabwareID = ", strLabwareID);
  }
  LPQ::LABWARE_GetConfigFile(ML_STAR, seq, strConfigFile);
  {
    _loopCounter1 = 0;
    while (1 == 1)
    {
      _loopCounter1 = _loopCounter1 + 1;
      intBackslash = StrFind(strConfigFile, Translate("\\"));
      if (intBackslash == -1)
      {
        strLabwareID = strConfigFile;
        intStringLength = StrGetLength(strLabwareID);
        intStringLength = intStringLength - 4;
        strLabwareID = StrLeft(strLabwareID, intStringLength);
        break;
      }
      intLength = StrGetLength(strConfigFile);
      intCount = intLength - (intBackslash + 1);
      strConfigFile = StrRight(strConfigFile, intCount);
      if (_loopCounter1 == 20)
      {
        abort;
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("~~~~~ strLabwareID = "), strLabwareID);
  arrLabwareIDs.SetSize(0);
  arrGripHeights.SetSize(0);
  arrGripWidths.SetSize(0);
  arrGripOpenWidths.SetSize(0);
  arrGripSpeeds.SetSize(0);
  arrZSpeed_Gets.SetSize(0);
  arrZSpeed_Places.SetSize(0);
  arrXAccelerations.SetSize(0);
  arrLabwareIDs.AddAsLast(Translate("Greiner_AutoFlask"));
  if (blnTransportType == 1)
  {
    arrGripHeights.AddAsLast(5.2);
    arrGripWidths.AddAsLast(78.2);
    arrGripOpenWidths.AddAsLast(82);
    arrGripSpeeds.AddAsLast(277.8);
    arrZSpeed_Gets.AddAsLast(60);
    arrZSpeed_Places.AddAsLast(60);
    arrXAccelerations.AddAsLast(1);
  }
  else
  {
    arrGripHeights.AddAsLast(3);
    arrGripWidths.AddAsLast(78);
    arrGripOpenWidths.AddAsLast(88);
    arrGripSpeeds.AddAsLast(277.8);
    arrZSpeed_Gets.AddAsLast(128.7);
    arrZSpeed_Places.AddAsLast(128.7);
    arrXAccelerations.AddAsLast(1);
  }
  arrLabwareIDs.AddAsLast(Translate("Greiner_FourWell_Quarter"));
  if (blnTransportType == 1)
  {
    arrGripHeights.AddAsLast(5.2);
    arrGripWidths.AddAsLast(78.5);
    arrGripOpenWidths.AddAsLast(82);
    arrGripSpeeds.AddAsLast(277.8);
    arrZSpeed_Gets.AddAsLast(128.7);
    arrZSpeed_Places.AddAsLast(128.7);
    arrXAccelerations.AddAsLast(1);
  }
  else
  {
    arrGripHeights.AddAsLast(3);
    arrGripWidths.AddAsLast(78);
    arrGripOpenWidths.AddAsLast(88);
    arrGripSpeeds.AddAsLast(277.8);
    arrZSpeed_Gets.AddAsLast(128.7);
    arrZSpeed_Places.AddAsLast(128.7);
    arrXAccelerations.AddAsLast(1);
  }
  arrLabwareIDs.AddAsLast(Translate("Fourwell"));
  if (blnTransportType == 1)
  {
    arrGripHeights.AddAsLast(5.2);
    arrGripWidths.AddAsLast(78.5);
    arrGripOpenWidths.AddAsLast(82);
    arrGripSpeeds.AddAsLast(277.8);
    arrZSpeed_Gets.AddAsLast(128.7);
    arrZSpeed_Places.AddAsLast(128.7);
    arrXAccelerations.AddAsLast(1);
  }
  else
  {
    arrGripHeights.AddAsLast(3);
    arrGripWidths.AddAsLast(78);
    arrGripOpenWidths.AddAsLast(88);
    arrGripSpeeds.AddAsLast(277.8);
    arrZSpeed_Gets.AddAsLast(128.7);
    arrZSpeed_Places.AddAsLast(128.7);
    arrXAccelerations.AddAsLast(1);
  }
  arrLabwareIDs.AddAsLast(Translate("Greiner_FourWell_Lid"));
  if (blnTransportType == 1)
  {
    arrGripHeights.AddAsLast(5.2);
    arrGripWidths.AddAsLast(78.5);
    arrGripOpenWidths.AddAsLast(82);
    arrGripSpeeds.AddAsLast(277.8);
    arrZSpeed_Gets.AddAsLast(128.7);
    arrZSpeed_Places.AddAsLast(128.7);
    arrXAccelerations.AddAsLast(1);
  }
  else
  {
    arrGripHeights.AddAsLast(3);
    arrGripWidths.AddAsLast(78);
    arrGripOpenWidths.AddAsLast(88);
    arrGripSpeeds.AddAsLast(277.8);
    arrZSpeed_Gets.AddAsLast(128.7);
    arrZSpeed_Places.AddAsLast(128.7);
    arrXAccelerations.AddAsLast(1);
  }
  arrLabwareIDs.AddAsLast(Translate("[LabwareID]"));
  if (blnTransportType == 1)
  {
    arrGripHeights.AddAsLast(3);
    arrGripWidths.AddAsLast(78);
    arrGripOpenWidths.AddAsLast(88);
    arrGripSpeeds.AddAsLast(277.8);
    arrZSpeed_Gets.AddAsLast(128.7);
    arrZSpeed_Places.AddAsLast(128.7);
    arrXAccelerations.AddAsLast(1);
  }
  else
  {
    arrGripHeights.AddAsLast(3);
    arrGripWidths.AddAsLast(78);
    arrGripOpenWidths.AddAsLast(88);
    arrGripSpeeds.AddAsLast(277.8);
    arrZSpeed_Gets.AddAsLast(128.7);
    arrZSpeed_Places.AddAsLast(128.7);
    arrXAccelerations.AddAsLast(1);
  }
  intArrayLabwareIDs_Size=arrLabwareIDs.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < intArrayLabwareIDs_Size;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (strLabwareID == arrLabwareIDs.ElementAt( loopCounter1 -1))
      {
        intGripHeight = arrGripHeights.ElementAt( loopCounter1 -1);
        intGripWidth = arrGripWidths.ElementAt( loopCounter1 -1);
        intGripWidthOpen = arrGripOpenWidths.ElementAt( loopCounter1 -1);
        intGripSpeed = arrGripSpeeds.ElementAt( loopCounter1 -1);
        intZSpeed_Get = arrZSpeed_Gets.ElementAt( loopCounter1 -1);
        intZSpeed_Place = arrZSpeed_Places.ElementAt( loopCounter1 -1);
        intXAcceleration = arrXAccelerations.ElementAt( loopCounter1 -1);
      }
    }
  }
  intTraceLevel = TRACELEVEL::GetTraceLevel();
  if (intTraceLevel == 2)
  {
    Trace("intGripHeight = ", intGripHeight);
    Trace("intGripWidth = ", intGripWidth);
    Trace("intGripWidthOpen = ", intGripWidthOpen);
    Trace("intGripSpeed = ", intGripSpeed);
    Trace("intZSpeed_Get = ", intZSpeed_Get);
    Trace("intZSpeed_Place = ", intZSpeed_Place);
    Trace("intXAcceleration = ", intXAcceleration);
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Labware settings: successful"), Translate(""));
  }
}

private function _PIP_AddMedia( sequence & seqDestination, variable intVol, variable strLC, variable strChannelPattern, variable intDestLoopPos ) void {
  private variable intTransferVolume;
  private variable blnPreWet;
  private variable intTipType;
  private variable intVolume;
  private variable intMaxTipVolume;
  private variable intNumberOfTransfers;
  private variable loopCounter1;
  private variable loopCounter2;
  private variable fltTransferVolume;
  private variable fltNumberOfTransfers;
  private sequence seqSource;
  private sequence seqTip;
  private variable blnSeqIncrement;
  private variable loopCounter3;
  private variable loopCounter4;
  private variable loopCounter7;
  private variable intSeqPos;
  private variable strLabwareID;
  private variable strWellID;
  private variable strBarcode;
  private variable strPositionID;
  private variable blnFourWell;
  private variable loopCounter5;
  private variable loopCounter6;
  private variable strCurrentBarcode;
  private variable intTemp;
  private sequence seqDest;
  private variable intDestSeqStart;
  private variable intNumberOfActiveDestPlates;
  private variable intDestSeqEnd;
  private variable fltNumberOfActiveDestPlates;
  private variable intDestPlatePosition;
  MECC::TraceComment(Translate("==========================================================\n\n                                              Add Media - Start\n\n=========================================================="));
  SeqCopySequence(seqSource, ML_STAR.Res_Media);
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("##### total transfer volume = "), intVol, Translate("mL"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Liquid class = "), strLC);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### strChannelPattern = "), strChannelPattern);
  MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
  MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(strLC);
  intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
  if (intTipType == 5)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Tip Type = "), Translate("1000uL High Volume Tip with filter"));
    intMaxTipVolume = 1000;
    SeqCopySequence(seqTip, ML_STAR.Tips_1000ulFiltered);
  }
  if (intTipType == 29)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Tip Type = "), Translate("4mL Tip with filter"));
    intMaxTipVolume = 4000;
    SeqCopySequence(seqTip, ML_STAR.Tips_4mLFiltered);
  }
  MECC::TraceComment(Translate("********** Calculate transfer cycles and volumes **********"));
  intVolume = intVol * 1000;
  fltNumberOfTransfers = intVolume / (intMaxTipVolume * 1.0);
  intNumberOfTransfers = MthCeiling(fltNumberOfTransfers);
  fltTransferVolume = intVolume / (intNumberOfTransfers * 1.0);
  intTransferVolume = MthCeiling(fltTransferVolume);
  SANGERGENERAL::VolumePlausibilityCheck(intTransferVolume, strLC);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### intNumberOfTransfers = "), intNumberOfTransfers);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### intTransferVolume = "), intTransferVolume);
  intDestSeqStart = seqDestination.GetCurrentPosition();
  intDestSeqEnd = seqDestination.GetCount();
  strLabwareID = SeqGetLabwareId(seqDestination);
  strLabwareID = StrMakeLower(strLabwareID);
  blnFourWell = StrFind(strLabwareID, Translate("four"));
  if (blnFourWell >= 0)
  {
    fltNumberOfActiveDestPlates = intDestSeqEnd / (16 * 1.0);
    intNumberOfActiveDestPlates = MthCeiling(fltNumberOfActiveDestPlates);
    {
      for(loopCounter7 = 0; loopCounter7 < intNumberOfActiveDestPlates;)
      {
        loopCounter7 = loopCounter7 + 1;
        intDestPlatePosition = (intDestLoopPos * 2) -1;
        if(loopCounter7 == 2)
        {
             intDestPlatePosition = intDestPlatePosition + 1;
        }
        if (blnSimMode == 1)
        {
          strCurrentBarcode=arrWorklist_DestinationBarcodes_Unique.GetAt(intDestPlatePosition-1);
        }
        else
        {
          strCurrentBarcode=arrDestinationBarcodes_Deck.GetAt(intDestPlatePosition-1);
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### strCurrentBarcode = "), strCurrentBarcode);
        {
          for(loopCounter5 = 0; loopCounter5 < intWorklistLineCount;)
          {
            loopCounter5 = loopCounter5 + 1;
            strBarcode=arrWorklist_DestinationBarcodes.GetAt(loopCounter5-1);
            if (strCurrentBarcode == strBarcode)
            {
              strWellID=arrWorklist_DestinationWellIDs.GetAt(loopCounter5-1);
              {
                for(loopCounter6 = 0; loopCounter6 < 4;)
                {
                  loopCounter6 = loopCounter6 + 1;
                  intTemp = ((StrIVal(strWellID) - 1) * 4) + 1;
                  if(loopCounter7 == 2)
                  {
                       intTemp = intTemp + 16;
                  }
                  // Trace("##### intTemp = ", intTemp);
                  intSeqPos = intTemp + loopCounter6 - 1;
                  // Trace("##### intSeqPos = ", intSeqPos);
                  seqDestination.SetCurrentPosition(intSeqPos);
                  strLabwareID = SeqGetLabwareId(seqDestination);
                  strPositionID = SeqGetPositionId(seqDestination);
                  SeqAdd(seqDest, strLabwareID, strPositionID);
                }
              }
            }
          }
        }
      }
    }
    seqDest.SetCurrentPosition(1);
  }
  else
  {
    SeqCopySequence(seqDest, seqDestination);
    seqDest.SetCurrentPosition(intDestSeqStart);
    seqDest.SetCount(intDestSeqEnd);
  }
  Util2::Debug::TraceSequence(seqDest);
  if (intMaxTipVolume == 1000)
  {
    blnPreWet = 1;
    SANGERGENERAL::StatusDisplay_Update(Translate("== Adding fresh media to labware"), Translate(" =="), 0);
    {
      loopCounter3 = 0;
      while (
         (seqDest.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqDest, 1);
        loopCounter3 = loopCounter3 + 1;
        SANGERGENERAL::TipPickup(ML_STAR, strChannelPattern, seqTip, Translate("TipCounter_1000uLFiltered"));
        {
          for(loopCounter1 = 0; loopCounter1 < intNumberOfTransfers;)
          {
            loopCounter1 = loopCounter1 + 1;
            if (loopCounter1 == intNumberOfTransfers)
            {
              blnSeqIncrement = 1;
            }
            else
            {
              blnSeqIncrement = 0;
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Transfer Cycle = "), loopCounter1);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            blnPreWet = 0;
          }
        }
        SANGERGENERAL::FourWellHandling(seqDest, strChannelPattern, 4);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seqDest.GetCurrentPosition() > 0 && seqDest.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqDest.SetMax(seqDest.GetTotal());
      seqDest.SetCurrentPosition(1);
    }
  }
  else
  {
    blnPreWet = 1;
    SANGERGENERAL::StatusDisplay_Update(Translate("== Adding fresh media to labware"), Translate(" =="), 0);
    {
      loopCounter4 = 0;
      while (
         (seqDest.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqDest, 1);
        loopCounter4 = loopCounter4 + 1;
        SANGERGENERAL::TipPickup(ML_STAR, strChannelPattern, seqTip, Translate("TipCounter_4mLFiltered"));
        {
          for(loopCounter2 = 0; loopCounter2 < intNumberOfTransfers;)
          {
            loopCounter2 = loopCounter2 + 1;
            if (loopCounter2 == intNumberOfTransfers)
            {
              blnSeqIncrement = 1;
            }
            else
            {
              blnSeqIncrement = 0;
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Transfer Cycle = "), loopCounter2);
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
            blnPreWet = 0;
          }
        }
        SANGERGENERAL::FourWellHandling(seqDest, strChannelPattern, 4);
        ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        if (
           (seqDest.GetCurrentPosition() > 0 && seqDest.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqDest.SetMax(seqDest.GetTotal());
      seqDest.SetCurrentPosition(1);
    }
  }
  seqDest.SetCurrentPosition(1);
  MECC::TraceComment(Translate("==========================================================\n\n                                              Add Media - End\n\n=========================================================="));
}

private function H_MethodEnd(  ) void {
  private variable strArchiveFilePath;
  private variable strSchemaFilePath;
  private variable strActiveFilePath;
  private variable strMethodsFolderPath;
  MECC::TraceComment(Translate("====================================\n                    Archive the Worklist\n===================================="));
  MECC::TraceComment(Translate("***** Delete Shema File *****"));
  strMethodsFolderPath = FilGetMethodsPath();
  strActiveRequestFolderPath = StrConcat2(strMethodsFolderPath, Translate("\\Sanger\\SGE\\Request Files\\"));
  strSchemaFilePath = StrConcat2(strActiveRequestFolderPath, Translate("schema.ini"));
  FileDirectoryLib::DeleteFile(strSchemaFilePath);
  MECC::TraceComment(Translate("***** Move Active Worklist *****"));
  strActiveFilePath = StrConcat2(strActiveRequestFolderPath, Translate("ActiveRequest.csv"));
  strArchiveFilePath = StrConcat4(strCurrentRunFolderPath, Translate(""), lpCount, Translate("_AccurateWorklist.csv"));
  FileDirectoryLib::MoveFile(strActiveFilePath, strArchiveFilePath);
  MECC::TraceComment(Translate("====================================\n                    Update User Log with current date\n===================================="));
}

private function _LabwareTransport( sequence & seqSource, sequence & seqDestination, sequence & seqLid_Source, sequence & seqLid_Dest, variable blnCOREGrips, variable blnEjectGrips, variable intLidTrip, variable strMessage ) void {
  private variable blnEjectTools;
  private variable intXAcceleration;
  private variable intDestSeqStart;
  private variable intZSpeed_Place;
  private variable intGripWidth;
  private variable strLabwareID;
  private variable intGripSpeed;
  private variable intGripWidthOpen;
  private variable strPositionID;
  private variable intGripHeight;
  private variable loopCounter2;
  private variable intZSpeed_Get;
  private variable loopCounter3;
  private variable intDestSeqEnd;
  private variable intSrcSeqStart;
  private variable intCOREChannelToUse;
  private variable loopCounter4;
  private variable intSrcSeqEnd;
  private variable intStringLength;
  private variable _strLabwareID;
  private variable loopCounter5;
  private variable blnMismatch;
  private variable blnDelid;
  private variable blnRelid;
  private variable blnSkipTrip;
  private variable loopCounter6;
  private variable loopCounter7;
  private variable loopCounter8;
  private variable loopCounter9;
  private variable loopCounter1;
  private variable intLidSrcSeqEnd;
  private variable intLidDestSeqStart;
  private variable loopCounter10;
  private variable intLidSrcSeqStart;
  private variable intLidDestSeqEnd;
  private variable intNumberOfSrcLidSeqPos;
  private variable intNumberOfDestLidSeqPos;
  private variable intNumberOfDestSeqPos;
  private variable intNumberOfSrcSeqPos;
  private variable strBarcode;
  MECC::TraceComment(Translate("==========================================================\n                      Labware Transport - Start\n=========================================================="));
  intLast1000ulCOREChannel = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("channelForCOREGrips"), Translate(""));
  intCOREChannelToUse = intLast1000ulCOREChannel;
  blnEjectTools = 0;
  _strLabwareID = SeqGetLabwareId(seqSource);
  intStringLength = StrGetLength(_strLabwareID);
  intStringLength = intStringLength - 5;
  _strLabwareID = StrLeft(_strLabwareID, intStringLength);
  if (_strLabwareID == "Greiner_AutoFlask")
  {
    intLidTrip = 0;
  }
  if (blnCOREGrips == 2)
  {
    blnSkipTrip = 1;
  }
  else
  {
    blnSkipTrip = 0;
  }
  if (intLidTrip == 0)
  {
    blnDelid = 0;
    blnRelid = 0;
    blnRelid = 0;
  }
  if (intLidTrip == 1)
  {
    blnDelid = 1;
    blnRelid = 0;
  }
  if (intLidTrip == 2)
  {
    blnDelid = 0;
    blnRelid = 1;
  }
  intSrcSeqStart = seqSource.GetCurrentPosition();
  intSrcSeqEnd = seqSource.GetCount();
  intNumberOfSrcSeqPos = intSrcSeqEnd - intSrcSeqStart;
  intDestSeqStart = seqDestination.GetCurrentPosition();
  intDestSeqEnd = seqDestination.GetCount();
  intNumberOfDestSeqPos = intDestSeqEnd - intDestSeqStart;
  if (intLidTrip != 0)
  {
    intLidSrcSeqStart = seqLid_Source.GetCurrentPosition();
    intLidSrcSeqEnd = seqLid_Source.GetCount();
    intNumberOfSrcLidSeqPos = intLidSrcSeqEnd - intLidSrcSeqStart;
    intLidDestSeqStart = seqLid_Dest.GetCurrentPosition();
    intLidDestSeqEnd = seqLid_Dest.GetCount();
    intNumberOfDestLidSeqPos = intLidDestSeqEnd - intLidDestSeqStart;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### intNumberOfSrcSeqPos = "), intNumberOfSrcSeqPos);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### intNumberOfDestSeqPos = "), intNumberOfDestSeqPos);
  if (intLidTrip != 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### intNumberOfSrcLidSeqPos = "), intNumberOfSrcLidSeqPos);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### intNumberOfDestLidSeqPos = "), intNumberOfDestLidSeqPos);
  }
  {
    loopCounter3 = 0;
    while (1 == 1)
    {
      loopCounter3 = loopCounter3 + 1;
      if (loopCounter3 == 1000)
      {
        abort;
      }
      strLabwareID = SeqGetLabwareId(seqSource);
      strPositionID = SeqGetPositionId(seqSource);
      TRACELEVEL::Trace_08(TRACE_LEVEL_DEBUG, Translate("----- Source Sequence Position "), loopCounter3, Translate(" - "), Translate(""), Translate(""), strLabwareID, Translate("."), strPositionID);
      if (loopCounter3 > intNumberOfSrcSeqPos)
      {
        break;
      }
      else
      {
        SeqIncrement(seqSource, 1);
      }
    }
  }
  seqSource.SetCount(intSrcSeqEnd);
  seqSource.SetCurrentPosition(intSrcSeqStart);
  if (intLidTrip != 0)
  {
    MECC::TraceComment(Translate("===== Trace Lid Source Sequence Positions ====="));
    {
      loopCounter10 = 0;
      while (1 == 1)
      {
        loopCounter10 = loopCounter10 + 1;
        strLabwareID = SeqGetLabwareId(seqLid_Source);
        strPositionID = SeqGetPositionId(seqLid_Source);
        TRACELEVEL::Trace_08(TRACE_LEVEL_DEBUG, Translate("----- Lid Source Sequence Position "), loopCounter10, Translate(" - "), Translate(""), Translate(""), strLabwareID, Translate("."), strPositionID);
        if (loopCounter10 > intNumberOfSrcLidSeqPos)
        {
          break;
        }
        else
        {
          SeqIncrement(seqLid_Source, 1);
        }
      }
    }
    seqLid_Source.SetCount(intLidSrcSeqEnd);
    seqLid_Source.SetCurrentPosition(intLidSrcSeqStart);
  }
  {
    loopCounter4 = 0;
    while (1 == 1)
    {
      loopCounter4 = loopCounter4 + 1;
      strLabwareID = SeqGetLabwareId(seqDestination);
      strPositionID = SeqGetPositionId(seqDestination);
      TRACELEVEL::Trace_08(TRACE_LEVEL_DEBUG, Translate("----- Destination Sequence Position "), loopCounter4, Translate(" - "), Translate(""), Translate(""), strLabwareID, Translate("."), strPositionID);
      if (loopCounter4 > intNumberOfDestSeqPos)
      {
        break;
      }
      else
      {
        SeqIncrement(seqDestination, 1);
      }
    }
  }
  seqDestination.SetCount(intDestSeqEnd);
  seqDestination.SetCurrentPosition(intDestSeqStart);
  if (intLidTrip != 0)
  {
    MECC::TraceComment(Translate("===== Trace Lid Destination Sequence Positions ====="));
    {
      loopCounter5 = 0;
      while (1 == 1)
      {
        loopCounter5 = loopCounter5 + 1;
        strLabwareID = SeqGetLabwareId(seqLid_Dest);
        strPositionID = SeqGetPositionId(seqLid_Dest);
        TRACELEVEL::Trace_08(TRACE_LEVEL_DEBUG, Translate("----- Lid Destination Sequence Position "), loopCounter5, Translate(" - "), Translate(""), Translate(""), strLabwareID, Translate("."), strPositionID);
        if (loopCounter5 > intNumberOfDestLidSeqPos)
        {
          break;
        }
        else
        {
          SeqIncrement(seqLid_Dest, 1);
        }
      }
    }
    seqLid_Dest.SetCount(intLidDestSeqEnd);
    seqLid_Dest.SetCurrentPosition(intLidDestSeqStart);
  }
  if (intNumberOfSrcSeqPos != intNumberOfDestSeqPos)
  {
    blnMismatch = 1;
  }
  else
  {
    if (intLidTrip != 0)
    {
      if (intNumberOfSrcSeqPos != intNumberOfSrcLidSeqPos)
      {
      }
      else
      {
        if (intNumberOfSrcSeqPos != intNumberOfDestLidSeqPos)
        {
          blnMismatch = 1;
        }
        else
        {
          if (intNumberOfSrcLidSeqPos != intNumberOfDestSeqPos)
          {
            blnMismatch = 1;
          }
          else
          {
            if (intNumberOfSrcLidSeqPos != intNumberOfDestLidSeqPos)
            {
              blnMismatch = 1;
            }
            else
            {
              if (intNumberOfDestSeqPos != intNumberOfDestLidSeqPos)
              {
                blnMismatch = 1;
              }
              else
              {
                blnMismatch = 0;
              }
            }
          }
        }
      }
    }
    else
    {
      blnMismatch = 0;
    }
  }
  if (blnMismatch == 1)
  {
    MECC::TraceComment(Translate("Different number of positions in each sequence. Method will abort"));
    Trace("intSrcSeqPos = ", intNumberOfSrcSeqPos);
    Trace("intNumberOfDestSeqPos = ", intNumberOfDestSeqPos);
    if(intLidTrip != 0)
    {Trace("intNumberOfSrcLidSeqPos = ", intNumberOfSrcLidSeqPos);}
    {Trace("intNumberOfDestLidSeqPos = ", intNumberOfDestLidSeqPos);}
    abort;
  }
  else
  {
  }
  if (blnCOREGrips == 1)
  {
    if (blnRelid == 1)
    {
      SANGERGENERAL::StatusDisplay_Update(strMessage, Translate("Relid Transport"), 0);
      {
        loopCounter6 = 0;
        while (
           (seqLid_Source.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, seqLid_Source, 1);
          loopCounter6 = loopCounter6 + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### LabwareTransportCycle = "), loopCounter6);
          _LabwareSettings(seqLid_Source, blnCOREGrips, intGripHeight, intGripWidth, intGripWidthOpen, intGripSpeed, intZSpeed_Get, intZSpeed_Place, intXAcceleration);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          SeqIncrement(seqLid_Source, 1);
          SeqIncrement(seqLid_Dest, 1);
          if (
             (seqLid_Source.GetCurrentPosition() > 0 && seqLid_Source.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        seqLid_Source.SetMax(seqLid_Source.GetTotal());
        seqLid_Source.SetCurrentPosition(1);
      }
      seqSource.SetCount(intSrcSeqEnd);
      seqSource.SetCurrentPosition(intSrcSeqStart);
      seqDestination.SetCount(intDestSeqEnd);
      seqDestination.SetCurrentPosition(intDestSeqStart);
      if (intLidTrip != 0)
      {
        seqLid_Source.SetCount(intLidSrcSeqEnd);
        seqLid_Source.SetCurrentPosition(intLidSrcSeqStart);
        seqLid_Dest.SetCount(intLidDestSeqEnd);
        seqLid_Dest.SetCurrentPosition(intLidDestSeqStart);
      }
    }
    if (blnSkipTrip == 0)
    {
      SANGERGENERAL::StatusDisplay_Update(Translate("trp - "), strMessage, 0);
      {
        loopCounter1 = 0;
        while (
           (seqSource.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, seqSource, 1);
          loopCounter1 = loopCounter1 + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### LabwareTransportCycle = "), loopCounter1);
          _LabwareSettings(seqSource, blnCOREGrips, intGripHeight, intGripWidth, intGripWidthOpen, intGripSpeed, intZSpeed_Get, intZSpeed_Place, intXAcceleration);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          _RetrieveBarcode(1, intXAcceleration, strBarcode, seqSource);
          ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          STCC::SetElementBarcodeForSequencePos(ML_STAR, seqDestination, -1, hslTrue, strBarcode);
          HSLLabwState::SetLabwareBarcode(ML_STAR, seqDestination, 300, strBarcode);
          SeqIncrement(seqSource, 1);
          SeqIncrement(seqDestination, 1);
          if (
             (seqSource.GetCurrentPosition() > 0 && seqSource.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        seqSource.SetMax(seqSource.GetTotal());
        seqSource.SetCurrentPosition(1);
      }
      seqSource.SetCount(intSrcSeqEnd);
      seqSource.SetCurrentPosition(intSrcSeqStart);
      seqDestination.SetCount(intDestSeqEnd);
      seqDestination.SetCurrentPosition(intDestSeqStart);
      if (intLidTrip != 0)
      {
        seqLid_Source.SetCount(intLidSrcSeqEnd);
        seqLid_Source.SetCurrentPosition(intLidSrcSeqStart);
        seqLid_Dest.SetCount(intLidDestSeqEnd);
        seqLid_Dest.SetCurrentPosition(intLidDestSeqStart);
      }
    }
    if (blnDelid == 1)
    {
      SANGERGENERAL::StatusDisplay_Update(strMessage, Translate("Delid Transport"), 0);
      {
        loopCounter7 = 0;
        while (
           (seqLid_Source.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, seqLid_Source, 1);
          loopCounter7 = loopCounter7 + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### LabwareTransportCycle = "), loopCounter7);
          _LabwareSettings(seqLid_Source, blnCOREGrips, intGripHeight, intGripWidth, intGripWidthOpen, intGripSpeed, intZSpeed_Get, intZSpeed_Place, intXAcceleration);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          SeqIncrement(seqLid_Source, 1);
          SeqIncrement(seqLid_Dest, 1);
          if (
             (seqLid_Source.GetCurrentPosition() > 0 && seqLid_Source.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        seqLid_Source.SetMax(seqLid_Source.GetTotal());
        seqLid_Source.SetCurrentPosition(1);
      }
      seqSource.SetCount(intSrcSeqEnd);
      seqSource.SetCurrentPosition(intSrcSeqStart);
      seqDestination.SetCount(intDestSeqEnd);
      seqDestination.SetCurrentPosition(intDestSeqStart);
      if (intLidTrip != 0)
      {
        seqLid_Source.SetCount(intLidSrcSeqEnd);
        seqLid_Source.SetCurrentPosition(intLidSrcSeqStart);
        seqLid_Dest.SetCount(intLidDestSeqEnd);
        seqLid_Dest.SetCurrentPosition(intLidDestSeqStart);
      }
    }
  }
  else
  {
    if (blnRelid == 1)
    {
      SANGERGENERAL::StatusDisplay_Update(strMessage, Translate("Relid Transport"), 0);
      {
        loopCounter8 = 0;
        while (
           (seqLid_Source.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, seqLid_Source, 1);
          loopCounter8 = loopCounter8 + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### LabwareTransportCycle = "), loopCounter8);
          _LabwareSettings(seqLid_Source, blnCOREGrips, intGripHeight, intGripWidth, intGripWidthOpen, intGripSpeed, intZSpeed_Get, intZSpeed_Place, intXAcceleration);
          ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
          ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
          SeqIncrement(seqLid_Source, 1);
          SeqIncrement(seqLid_Dest, 1);
          if (
             (seqLid_Source.GetCurrentPosition() > 0 && seqLid_Source.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        seqLid_Source.SetMax(seqLid_Source.GetTotal());
        seqLid_Source.SetCurrentPosition(1);
      }
      seqSource.SetCount(intSrcSeqEnd);
      seqSource.SetCurrentPosition(intSrcSeqStart);
      seqDestination.SetCount(intDestSeqEnd);
      seqDestination.SetCurrentPosition(intDestSeqStart);
      if (intLidTrip != 0)
      {
        seqLid_Source.SetCount(intLidSrcSeqEnd);
        seqLid_Source.SetCurrentPosition(intLidSrcSeqStart);
        seqLid_Dest.SetCount(intLidDestSeqEnd);
        seqLid_Dest.SetCurrentPosition(intLidDestSeqStart);
      }
    }
    if (blnSkipTrip == 0)
    {
      SANGERGENERAL::StatusDisplay_Update(strMessage, Translate("Labware Transport"), 0);
      {
        loopCounter2 = 0;
        while (
           (seqSource.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, seqSource, 1);
          loopCounter2 = loopCounter2 + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### LabwareTransportCycle = "), loopCounter2);
          _LabwareSettings(seqSource, blnCOREGrips, intGripHeight, intGripWidth, intGripWidthOpen, intGripSpeed, intZSpeed_Get, intZSpeed_Place, intXAcceleration);
          ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
          ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
          SeqIncrement(seqSource, 1);
          SeqIncrement(seqDestination, 1);
          if (
             (seqSource.GetCurrentPosition() > 0 && seqSource.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        seqSource.SetMax(seqSource.GetTotal());
        seqSource.SetCurrentPosition(1);
      }
      seqSource.SetCount(intSrcSeqEnd);
      seqSource.SetCurrentPosition(intSrcSeqStart);
      seqDestination.SetCount(intDestSeqEnd);
      seqDestination.SetCurrentPosition(intDestSeqStart);
      if (intLidTrip != 0)
      {
        seqLid_Source.SetCount(intLidSrcSeqEnd);
        seqLid_Source.SetCurrentPosition(intLidSrcSeqStart);
        seqLid_Dest.SetCount(intLidDestSeqEnd);
        seqLid_Dest.SetCurrentPosition(intLidDestSeqStart);
      }
    }
    if (blnDelid == 1)
    {
      SANGERGENERAL::StatusDisplay_Update(strMessage, Translate("Delid Transport"), 0);
      {
        loopCounter9 = 0;
        while (
           (seqLid_Source.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, seqLid_Source, 1);
          loopCounter9 = loopCounter9 + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### LabwareTransportCycle = "), loopCounter9);
          _LabwareSettings(seqLid_Source, blnCOREGrips, intGripHeight, intGripWidth, intGripWidthOpen, intGripSpeed, intZSpeed_Get, intZSpeed_Place, intXAcceleration);
          ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
          ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
          SeqIncrement(seqLid_Source, 1);
          SeqIncrement(seqLid_Dest, 1);
          if (
             (seqLid_Source.GetCurrentPosition() > 0 && seqLid_Source.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        seqLid_Source.SetMax(seqLid_Source.GetTotal());
        seqLid_Source.SetCurrentPosition(1);
      }
      seqSource.SetCount(intSrcSeqEnd);
      seqSource.SetCurrentPosition(intSrcSeqStart);
      seqDestination.SetCount(intDestSeqEnd);
      seqDestination.SetCurrentPosition(intDestSeqStart);
      if (intLidTrip != 0)
      {
        seqLid_Source.SetCount(intLidSrcSeqEnd);
        seqLid_Source.SetCurrentPosition(intLidSrcSeqStart);
        seqLid_Dest.SetCount(intLidDestSeqEnd);
        seqLid_Dest.SetCurrentPosition(intLidDestSeqStart);
      }
    }
    ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
  }
}

private function D_SequenceCreation(  ) void {
  private variable intMaxPlateNumber;
  private variable strLoadIDSuffix;
  private variable strLoadID;
  private variable arrGreinerAutoFlaskLoadIDs[];
  private variable loopCounter4;
  private variable intNumberOfPlatesInTilt_Offset;
  private variable intNumberOfPlatesInActiveArea;
  private variable intNumberOfTiltStationPositions;
  private variable intNumberOfTempPositions;
  private variable intNumberOfPlatesInLoadingArea;
  private variable intNumberOfPlatesInActiveArea_Offset;
  private variable intLabwareCounter;
  private variable loopCounter6;
  private variable arrFourWellIDs[];
  private variable intNumberOfPlatesInTemp_Offset;
  private variable intNumberOfHHSPositions;
  private variable arrDeckViewReset[];
  private variable loopCounter12;
  private variable loopCounter3;
  private variable intTraceLevel;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Sequence Creation - Start\n\n******************************************************************************************************************************************************"));
  intNumberOfPlatesInLoadingArea = 10;
  intNumberOfPlatesInActiveArea = 5;
  intNumberOfPlatesInActiveArea_Offset = intNumberOfPlatesInActiveArea + intNumberOfPlatesInLoadingArea;
  intNumberOfTiltStationPositions = 2;
  intNumberOfPlatesInTilt_Offset = intNumberOfPlatesInActiveArea_Offset + intNumberOfTiltStationPositions;
  intNumberOfTempPositions = 4;
  intNumberOfPlatesInTemp_Offset = intNumberOfPlatesInTilt_Offset + intNumberOfTempPositions;
  intNumberOfHHSPositions = 2;
  intMaxPlateNumber = intNumberOfPlatesInLoadingArea + intNumberOfPlatesInActiveArea + intNumberOfTiltStationPositions+ intNumberOfTempPositions + intNumberOfHHSPositions;
  Trace(intMaxPlateNumber);
  arrFourWellIDs.SetSize(0);
  arrFourWellIDs.AddAsLast(Translate("A1"));
  arrFourWellIDs.AddAsLast(Translate("B1"));
  arrFourWellIDs.AddAsLast(Translate("C1"));
  arrFourWellIDs.AddAsLast(Translate("D1"));
  arrFourWellIDs.AddAsLast(Translate("A2"));
  arrFourWellIDs.AddAsLast(Translate("B2"));
  arrFourWellIDs.AddAsLast(Translate("C2"));
  arrFourWellIDs.AddAsLast(Translate("D2"));
  arrFourWellIDs.AddAsLast(Translate("A3"));
  arrFourWellIDs.AddAsLast(Translate("B3"));
  arrFourWellIDs.AddAsLast(Translate("C3"));
  arrFourWellIDs.AddAsLast(Translate("D3"));
  arrFourWellIDs.AddAsLast(Translate("A4"));
  arrFourWellIDs.AddAsLast(Translate("B4"));
  arrFourWellIDs.AddAsLast(Translate("C4"));
  arrFourWellIDs.AddAsLast(Translate("D4"));
  SeqRemoveAll(seqPipetting_TiltStation);
  SeqRemoveAll(seqTransport_Active_Dest);
  SeqRemoveAll(seqTransport_Active_Src);
  SeqRemoveAll(seqTransport_HHS);
  SeqRemoveAll(seqTransport_LidPark);
  SeqRemoveAll(seqTransport_LidTilt);
  SeqRemoveAll(seqTransport_Loading_Dest);
  SeqRemoveAll(seqTransport_Loading_Src);
  SeqRemoveAll(seqTransport_TempStorage);
  SeqRemoveAll(seqTransport_TiltStation);
  if (strProcessType == "mediachange")
  {
    {
      for(loopCounter3 = 0; loopCounter3 < intNumberOfTiltStationPositions;)
      {
        loopCounter3 = loopCounter3 + 1;
        if (loopCounter3 < 10)
        {
          strLoadIDSuffix = StrConcat2(Translate("0"), loopCounter3);
        }
        else
        {
          strLoadIDSuffix = StrConcat2(loopCounter3, Translate(""));
        }
        strLoadID = StrConcat2(Translate("Greiner_AutoFlask_Tilt_00"), strLoadIDSuffix);
        SeqAdd(seqPipetting_TiltStation, strLoadID, Translate("A1"));
      }
    }
    {
      for(loopCounter4 = 0; loopCounter4 < intNumberOfSourcePlates;)
      {
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 < 10)
        {
          strLoadIDSuffix = StrConcat2(Translate("0"), loopCounter4);
        }
        else
        {
          strLoadIDSuffix = StrConcat2(loopCounter4, Translate(""));
        }
        strLoadID = StrConcat2(Translate("Greiner_AutoFlask_00"), strLoadIDSuffix);
        SeqAdd(seqTransport_Loading_Src, strLoadID, Translate("A1"));
      }
    }
    {
      for(loopCounter6 = 0; loopCounter6 < intNumberOfSourcePlates;)
      {
        loopCounter6 = loopCounter6 + 1;
        if (loopCounter6 > intNumberOfPlatesInActiveArea)
        {
          MECC::TraceComment(Translate("===== Source plate number exceeds number of active area positions ====="));
          break;
        }
        intLabwareCounter = loopCounter6 + intNumberOfPlatesInLoadingArea;
        if (intLabwareCounter < 10)
        {
          strLoadIDSuffix = StrConcat2(Translate("0"), intLabwareCounter);
        }
        else
        {
          strLoadIDSuffix = StrConcat2(intLabwareCounter, Translate(""));
        }
        strLoadID = StrConcat2(Translate("Greiner_AutoFlask_00"), strLoadIDSuffix);
        SeqAdd(seqTransport_Active_Src, strLoadID, Translate("A1"));
      }
    }
    SeqCopySequence(seqTransport_TiltStation, seqPipetting_TiltStation);
    SeqRemoveAll(seqTransport_HHS);
    SeqRemoveAll(seqTransport_TempStorage);
  }
  seqPipetting_TiltStation.SetCurrentPosition(1);
  seqTransport_Active_Dest.SetCurrentPosition(1);
  seqTransport_Active_Src.SetCurrentPosition(1);
  seqTransport_HHS.SetCurrentPosition(1);
  seqTransport_LidPark.SetCurrentPosition(1);
  seqTransport_LidTilt.SetCurrentPosition(1);
  seqTransport_Loading_Dest.SetCurrentPosition(1);
  seqTransport_Loading_Src.SetCurrentPosition(1);
  seqTransport_TempStorage.SetCurrentPosition(1);
  seqTransport_TiltStation.SetCurrentPosition(1);
  intTraceLevel = TRACELEVEL::GetTraceLevel();
  if (intTraceLevel == TRACE_LEVEL_DEBUG)
  {
    Util2::Debug::TraceSequence(seqPipetting_TiltStation);
    Util2::Debug::TraceSequence(seqTransport_TiltStation);
    Util2::Debug::TraceSequence(seqTransport_Loading_Src);
    Util2::Debug::TraceSequence(seqTransport_Loading_Dest);
    Util2::Debug::TraceSequence(seqTransport_Active_Src);
    Util2::Debug::TraceSequence(seqTransport_Active_Dest);
    Util2::Debug::TraceSequence(seqTransport_TempStorage);
    Util2::Debug::TraceSequence(seqTransport_LidTilt);
    Util2::Debug::TraceSequence(seqTransport_LidPark);
    Util2::Debug::TraceSequence(seqTransport_HHS);
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- Sequences successfully generated"), Translate(""));
  }
  arrDeckViewReset.SetSize(0);
  {
    for(loopCounter12 = 0; loopCounter12 < intMaxPlateNumber;)
    {
      loopCounter12 = loopCounter12 + 1;
      arrDeckViewReset.AddAsLast(0);
    }
  }
  DeckVisualize::UpdateLoadedLabware(ML_STAR, arrGreinerAutoFlaskLoadIDs, arrDeckViewReset, Translate("This is the description"));
  SeqCopySequence(seqBarcode, ML_STAR.Greiner_AutoFlask_Barcoding_0001);
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Sequence Creation - End\n\n******************************************************************************************************************************************************"));
}

private function _PIP_RemoveMediaToWaste( sequence & seqSource, variable intVol, variable strLC, variable strChannelPattern, variable intSrcLoopPos ) void {
  private variable loopCounter7;
  private variable intSeqPos;
  private variable strLabwareID;
  private variable intTransferVolume;
  private variable fltNumberOfActiveSrcPlates;
  private variable intTipType;
  private variable blnPreWet;
  private variable intRetractHeight;
  private variable strWellID;
  private variable intVolume;
  private variable strBarcode;
  private variable blnSeqIncrement;
  private variable intMaxTipVolume;
  private variable intFixedHeight;
  private variable intNumberOfTransfers;
  private variable strPositionID;
  private variable loopCounter1;
  private variable blnFourWell;
  private variable fltNumberOfTransfers;
  private variable fltTransferVolume;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable intNumberOfActiveSrcPlates;
  private variable intSrcSeqEnd;
  private variable loopCounter4;
  private variable loopCounter5;
  private variable loopCounter6;
  private variable strCurrentBarcode;
  private sequence seqDestination;
  private sequence seqSrc;
  private sequence seqTip;
  private variable intSrcPlatePosition;
  private variable intTemp;
  private variable intSrcSeqStart;
  private variable intSeqBarcodePos;
  private variable intWellNum;
  private variable arrCurrentBarcodes[];
  private variable strLogFilePath;
  private variable strMappingFilePath;
  private variable strMappingFileName;
  private variable hndTrackerFile_TStatusStateDescription;
  private variable hndTrackerFile_TPositionID;
  private variable hndTrackerFile_SLabwareID;
  private variable hndMappingFile_TPositionId;
  private variable hndMappingFile_TRackBC;
  private variable loopCounter8;
  private variable hndMappingFile_TVolume;
  private variable hndMappingFile_TStatusSummary;
  private variable strTrackerFilePath;
  private variable hndTrackerFile_TStatusSummary;
  private variable hndTrackerFile_TLabwareID;
  private variable hndTrackerFile_SPositionID;
  private variable hndMappingFile_ActionDateTime;
  private variable hndTrackerFile_TimeStamp;
  private variable hndMappingFile_SPositionId;
  private variable hndMappingFile_SLabwareId;
  private variable hndMappingFile_TPositionBC;
  private variable hndMappingFile_UserName;
  private variable hndTrackerFile_Volume;
  private variable strCurrentTime;
  private variable hndMappingFile_TLabwareId;
  private variable strCurrentDate;
  private variable rtnFileExists;
  private variable hndMappingFile_SPositionBC;
  private variable hndMappingFile_TSumStateDescription;
  private variable hndTrackerFile_SRackBC;
  private variable hndTrackerFile_TRackBC;
  private variable hndMappingFile_SRackBC;
  private variable hndMappingFile_RecordId;
  private file hndMappingFile;
  private file hndTrackerFile;
  private variable hndTrackerFile_Action;
  private variable intLength;
  private variable strFunctionName;
  private variable hndTrackerFile_User;
  private variable loopCounter9;
  private variable arrAllBarcodes[];
  MECC::TraceComment(Translate("==========================================================\n\n                                         Remove Media - Start\n\n=========================================================="));
  SeqCopySequence(seqDestination, ML_STAR.Res_Waste);
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("##### total transfer volume = "), intVol, Translate("mL"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Liquid class = "), strLC);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### strChannelPattern = "), strChannelPattern);
  MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
  MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(strLC);
  intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
  if (intTipType == 5)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Tip Type = "), Translate("1000uL High Volume Tip with filter"));
    intMaxTipVolume = 1000;
    SeqCopySequence(seqTip, ML_STAR.Tips_1000ulFiltered);
  }
  if (intTipType == 29)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Tip Type = "), Translate("4mL Tip with filter"));
    intMaxTipVolume = 4000;
    SeqCopySequence(seqTip, ML_STAR.Tips_4mLFiltered);
  }
  MECC::TraceComment(Translate("********** Calculate transfer cycles and volumes **********"));
  intVolume = intVol * 1000;
  fltNumberOfTransfers = intVolume / (intMaxTipVolume * 1.0);
  intNumberOfTransfers = MthCeiling(fltNumberOfTransfers);
  fltTransferVolume = intVolume / (intNumberOfTransfers * 1.0);
  intTransferVolume = MthCeiling(fltTransferVolume);
  SANGERGENERAL::VolumePlausibilityCheck(intTransferVolume, strLC);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### intNumberOfTransfers = "), intNumberOfTransfers);
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("##### intTransferVolume per loop = "), intTransferVolume, Translate("uL"), Translate(""));
  if(0){
    arrCurrentBarcodes.SetSize(0);
    strLabwareID = SeqGetLabwareId(seqSource);
    strLabwareID = StrMakeLower(strLabwareID);
    blnFourWell = StrFind(strLabwareID, Translate("four"));
    intSrcSeqStart = seqSource.GetCurrentPosition();
    intSrcSeqEnd = seqSource.GetCount();
    if (blnFourWell >= 0)
    {
      intWellNum = 16;
    }
    else
    {
      intWellNum = 1;
    }
    fltNumberOfActiveSrcPlates = intSrcSeqEnd / (intWellNum * 1.0);
    intNumberOfActiveSrcPlates = MthCeiling(fltNumberOfActiveSrcPlates);
    intSeqBarcodePos = 1;
    {
      for(loopCounter7 = 0; loopCounter7 < intNumberOfActiveSrcPlates;)
      {
        loopCounter7 = loopCounter7 + 1;
        intSrcPlatePosition = (intSrcLoopPos * 2) -1;
        if(loopCounter7 == 2)
        {
             intSrcPlatePosition = intSrcPlatePosition + 1;
        }
        Trace("intSrcPlatePosition = ", intSrcPlatePosition);
        if (blnCustomDriven == 1)
        {
          arrAllBarcodes.SetSize(0);
          JSONSEARCH::GetEveryEntry(Translate(""), Translate("fakeBarcodes"), arrAllBarcodes);
          {
            for(loopCounter9 = 0; loopCounter9 < intNumberOfSourcePlates;)
            {
              loopCounter9 = loopCounter9 + 1;
              arrWorklist_SourceBarcodes_Unique.AddAsLast(arrAllBarcodes.ElementAt( loopCounter9 -1));
            }
          }
        }
        if (blnSimMode == 1)
        {
          strCurrentBarcode=arrWorklist_SourceBarcodes_Unique.GetAt(intSrcPlatePosition-1);
        }
        else
        {
          strCurrentBarcode=arrSourceBarcodes_Deck.GetAt(intSrcPlatePosition-1);
        }
        arrCurrentBarcodes.AddAsLast(strCurrentBarcode);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Active Barcodes = "), strCurrentBarcode);
        STCC::SetElementBarcodeForSequencePos(ML_STAR, seqSource, intSeqBarcodePos, hslTrue, strCurrentBarcode);
        intSeqBarcodePos = intSeqBarcodePos + intWellNum;
      }
    }
  }
  strBarcode = HSLLabwState::GetLabwareBarcode(ML_STAR, seqSource, 300);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### strBarcode = "), strBarcode);
  if (blnFourWell >= 0)
  {
    {
      for(loopCounter7 = 0; loopCounter7 < intNumberOfActiveSrcPlates;)
      {
        loopCounter7 = loopCounter7 + 1;
        {
          for(loopCounter5 = 0; loopCounter5 < intWorklistLineCount;)
          {
            loopCounter5 = loopCounter5 + 1;
            strBarcode=arrWorklist_SourceBarcodes.GetAt(loopCounter5-1);
            if (strCurrentBarcode == strBarcode)
            {
              strWellID=arrWorklist_SourceWellIDs.GetAt(loopCounter5-1);
              {
                for(loopCounter6 = 0; loopCounter6 < 4;)
                {
                  loopCounter6 = loopCounter6 + 1;
                  intTemp = ((StrIVal(strWellID) - 1) * 4) + 1;
                  if(loopCounter7 == 2)
                  {
                       intTemp = intTemp + 16;
                  }
                  // Trace("##### intTemp = ", intTemp);
                  intSeqPos = intTemp + loopCounter6 - 1;
                  // Trace("##### intSeqPos = ", intSeqPos);
                  seqSource.SetCurrentPosition(intSeqPos);
                  strLabwareID = SeqGetLabwareId(seqSource);
                  strPositionID = SeqGetPositionId(seqSource);
                  SeqAdd(seqSrc, strLabwareID, strPositionID);
                }
              }
            }
          }
        }
      }
    }
    seqSrc.SetCurrentPosition(1);
  }
  else
  {
    SeqCopySequence(seqSrc, seqSource);
    seqSrc.SetCurrentPosition(intSrcSeqStart);
    seqSrc.SetCount(intSrcSeqEnd);
  }
  Util2::Debug::TraceSequence(seqSrc);
  MECC::TraceComment(Translate("**************************************\n          Tilt Station: Start\n**************************************"));
  if (intMaxTipVolume == 1000)
  {
    intFixedHeight = 5;
    intRetractHeight = 5;
    blnPreWet = 1;
    SANGERGENERAL::StatusDisplay_Update(Translate("== Removing old media from labware"), Translate(" =="), 0);
    {
      loopCounter3 = 0;
      while (
         (seqSrc.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqSrc, 1);
        loopCounter3 = loopCounter3 + 1;
        SANGERGENERAL::TipPickup(ML_STAR, strChannelPattern, seqTip, Translate("TipCounter_1000uLFiltered"));
        {
          for(loopCounter1 = 0; loopCounter1 < intNumberOfTransfers;)
          {
            loopCounter1 = loopCounter1 + 1;
            if (loopCounter1 == intNumberOfTransfers)
            {
              blnSeqIncrement = 1;
            }
            else
            {
              blnSeqIncrement = 0;
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Transfer Cycle = "), loopCounter1);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            blnPreWet = 0;
          }
        }
        SANGERGENERAL::FourWellHandling(seqSrc, strChannelPattern, 4);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seqSrc.GetCurrentPosition() > 0 && seqSrc.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqSrc.SetMax(seqSrc.GetTotal());
      seqSrc.SetCurrentPosition(1);
    }
  }
  else
  {
    intFixedHeight = 5;
    intRetractHeight = 5;
    SANGERGENERAL::StatusDisplay_Update(Translate("Removing old media from labware"), Translate(""), 0);
    {
      loopCounter4 = 0;
      while (
         (seqSrc.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqSrc, 1);
        loopCounter4 = loopCounter4 + 1;
        blnPreWet = 1;
        SANGERGENERAL::TipPickup(ML_STAR, strChannelPattern, seqTip, Translate("TipCounter_4mLFiltered"));
        {
          for(loopCounter2 = 0; loopCounter2 < intNumberOfTransfers;)
          {
            loopCounter2 = loopCounter2 + 1;
            if (loopCounter2 == intNumberOfTransfers)
            {
              blnSeqIncrement = 1;
            }
            else
            {
              blnSeqIncrement = 0;
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Transfer Cycle = "), loopCounter2);
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
            blnPreWet = 0;
          }
        }
        SANGERGENERAL::FourWellHandling(seqSrc, strChannelPattern, 4);
        ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        if (
           (seqSrc.GetCurrentPosition() > 0 && seqSrc.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqSrc.SetMax(seqSrc.GetTotal());
      seqSrc.SetCurrentPosition(1);
    }
  }
  strTrackerFilePath = StrConcat4(strCurrentRunFolderPath, Translate(""), lpCount, Translate("_StepTracker.csv"));
  rtnFileExists = FileDirectoryLib::CheckIfFileExists(strTrackerFilePath);
  if (rtnFileExists == 1)
  {
  }
  else
  {
  }
  strMappingFileName = Translate("SampleTransfer384to384.xls");
  strLogFilePath = FilGetLogFilesPath();
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, seqSrc);
  {
    variable _FilterIdsArray_2[];
    variable _ColumnIdsArray_2[];
    variable _ColumnNamesArray_2[];
    variable _ExperimentsArray_2[];
    _FilterIdsArray_2.SetSize(0);
    _ColumnNamesArray_2.SetSize(14);
    _ColumnIdsArray_2.SetSize(14);
    _ColumnNamesArray_2.SetAt(0, "RecordId");
    _ColumnIdsArray_2.SetAt(0, 0);
    _ColumnNamesArray_2.SetAt(1, "TRackBC");
    _ColumnIdsArray_2.SetAt(1, 1);
    _ColumnNamesArray_2.SetAt(2, "TLabwareId");
    _ColumnIdsArray_2.SetAt(2, 2);
    _ColumnNamesArray_2.SetAt(3, "TPositionId");
    _ColumnIdsArray_2.SetAt(3, 3);
    _ColumnNamesArray_2.SetAt(4, "TPositionBC");
    _ColumnIdsArray_2.SetAt(4, 4);
    _ColumnNamesArray_2.SetAt(5, "TStatusSummary");
    _ColumnIdsArray_2.SetAt(5, 5);
    _ColumnNamesArray_2.SetAt(6, "TSumStateDescription");
    _ColumnIdsArray_2.SetAt(6, 6);
    _ColumnNamesArray_2.SetAt(7, "TVolume");
    _ColumnIdsArray_2.SetAt(7, 7);
    _ColumnNamesArray_2.SetAt(8, "SRackBC");
    _ColumnIdsArray_2.SetAt(8, 8);
    _ColumnNamesArray_2.SetAt(9, "SLabwareId");
    _ColumnIdsArray_2.SetAt(9, 9);
    _ColumnNamesArray_2.SetAt(10, "SPositionId");
    _ColumnIdsArray_2.SetAt(10, 10);
    _ColumnNamesArray_2.SetAt(11, "SPositionBC");
    _ColumnIdsArray_2.SetAt(11, 11);
    _ColumnNamesArray_2.SetAt(12, "ActionDateTime");
    _ColumnIdsArray_2.SetAt(12, 12);
    _ColumnNamesArray_2.SetAt(13, "UserName");
    _ColumnIdsArray_2.SetAt(13, 13);
    _ExperimentsArray_2.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, seqDestination, 1, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, strMappingFileName, 1, 0, strLogFilePath, 1);
  }
  strMappingFilePath = StrConcat4(strLogFilePath, Translate("\\"), strMappingFileName, Translate(""));
  hndMappingFile.AddField("RecordId", hndMappingFile_RecordId, hslFloat);
  hndMappingFile.AddField("TRackBC", hndMappingFile_TRackBC, hslString, 255);
  hndMappingFile.AddField("TLabwareId", hndMappingFile_TLabwareId, hslString, 255);
  hndMappingFile.AddField("TPositionId", hndMappingFile_TPositionId, hslString, 255);
  hndMappingFile.AddField("TPositionBC", hndMappingFile_TPositionBC, hslString, 255);
  hndMappingFile.AddField("TStatusSummary", hndMappingFile_TStatusSummary, hslFloat);
  hndMappingFile.AddField("TSumStateDescription", hndMappingFile_TSumStateDescription, hslString, 255);
  hndMappingFile.AddField("TVolume", hndMappingFile_TVolume, hslFloat);
  hndMappingFile.AddField("SRackBC", hndMappingFile_SRackBC, hslString, 255);
  hndMappingFile.AddField("SLabwareId", hndMappingFile_SLabwareId, hslString, 255);
  hndMappingFile.AddField("SPositionId", hndMappingFile_SPositionId, hslString, 255);
  hndMappingFile.AddField("SPositionBC", hndMappingFile_SPositionBC, hslString, 255);
  hndMappingFile.AddField("ActionDateTime", hndMappingFile_ActionDateTime, hslString, 255);
  hndMappingFile.AddField("UserName", hndMappingFile_UserName, hslString, 255);
  if( 0 == hndMappingFile.Open(strMappingFilePath + " " + "ReportMapping$", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strMappingFilePath, "HxMetEdCompCmd");
  }
  hndTrackerFile.AddField("Action", hndTrackerFile_Action, hslString, 255);
  hndTrackerFile.AddField("SRackBC", hndTrackerFile_SRackBC, hslString, 255);
  hndTrackerFile.AddField("SLabwareID", hndTrackerFile_SLabwareID, hslString, 255);
  hndTrackerFile.AddField("SPositionID", hndTrackerFile_SPositionID, hslString, 255);
  hndTrackerFile.AddField("TRackBC", hndTrackerFile_TRackBC, hslString, 255);
  hndTrackerFile.AddField("TLabwareID", hndTrackerFile_TLabwareID, hslString, 255);
  hndTrackerFile.AddField("TPositionID", hndTrackerFile_TPositionID, hslString, 255);
  hndTrackerFile.AddField("Volume", hndTrackerFile_Volume, hslString, 255);
  hndTrackerFile.AddField("TimeStamp", hndTrackerFile_TimeStamp, hslString, 255);
  hndTrackerFile.AddField("TStatusSummary", hndTrackerFile_TStatusSummary, hslString, 255);
  hndTrackerFile.AddField("TStatusStateDescription", hndTrackerFile_TStatusStateDescription, hslString, 255);
  hndTrackerFile.AddField("User", hndTrackerFile_User, hslString, 255);
  hndTrackerFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hndTrackerFile.Open(strTrackerFilePath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strTrackerFilePath, "HxMetEdCompCmd");
  }
  {
    loopCounter8 = 0;
    while (
       (hndMappingFile.Eof() == 0)
    )
    {
      loopCounter8 = loopCounter8 + 1;
      if( 0 == hndMappingFile.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      intLength = 0;
      strFunctionName = Translate("");
      {
           strFunctionName = GetFunctionName();
           intLength = StrGetLength(strFunctionName) - StrReverseFind(strFunctionName, "::") - 2;
           hndTrackerFile_Action = StrRight(strFunctionName, intLength);
      }
      hndTrackerFile_SRackBC = hndMappingFile_SRackBC;
      hndTrackerFile_SLabwareID = hndMappingFile_SLabwareId;
      hndTrackerFile_SPositionID = hndMappingFile_SPositionId;
      hndTrackerFile_TRackBC = hndMappingFile_TRackBC;
      hndTrackerFile_TLabwareID = hndMappingFile_TLabwareId;
      hndTrackerFile_TPositionID = hndMappingFile_TPositionId;
      hndTrackerFile_Volume = intTransferVolume;
      hndTrackerFile_TimeStamp = hndMappingFile_ActionDateTime;
      if (hndTrackerFile_TimeStamp == "'----------")
      {
        strCurrentDate = TimGetFormattedDate(Translate("%Y/%m/%d"));
        strCurrentTime = TimGetFormattedTime(Translate("%H:%M"));
        hndTrackerFile_TimeStamp = StrConcat4(strCurrentTime, Translate(" "), strCurrentDate, Translate(""));
      }
      hndTrackerFile_TStatusSummary = hndMappingFile_TStatusSummary;
      hndTrackerFile_TStatusStateDescription = hndMappingFile_TSumStateDescription;
      hndTrackerFile_User = strUsersPreferredName;
      if (hndTrackerFile_TStatusStateDescription != "Not used")
      {
        if( 0 == hndTrackerFile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
  }
  if( 0 != hndMappingFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndMappingFile.RemoveFields();
  if( 0 != hndTrackerFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndTrackerFile.RemoveFields();
  SANGERGENERAL::DeleteSchema(strCurrentRunFolderPath);
  seqSrc.SetCurrentPosition(1);
  seqSource.SetCurrentPosition(1);
  MECC::TraceComment(Translate("==========================================================\n\n                                         Remove Media - End\n\n=========================================================="));
}

private function _StepSuccess( variable _rtnStepSuccess ) void {
  if (_rtnStepSuccess == 1)
  {
  }
  else
  {
    abort;
  }
}

private function _CycleSystem(  ) void {
  private variable fltAngle;
  private variable intMaxTime;
  private variable intElapsedTime;
  private variable fltX;
  private variable fltY;
  private variable fltZ;
  private timer tmr1;
  private timer tmr2;
  private variable intValidPos;
  private variable arrValidXPos[];
  private variable intXIncrement;
  private variable intXPos;
  private variable loopCounter1;
  private variable intPos;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable loopCounter4;
  private timer tmr3;
  MECC::TraceComment(Translate("==========================================================\n\n                                         Cycle System - Start\n\n=========================================================="));
  SANGERGENERAL::StatusDisplay_Update(Translate("UV Cycle System"), Translate(": Start"), 0);
  if (blnSimMode == 1)
  {
    intMaxTime = 15;
  }
  else
  {
    if (blnTesting == 1)
    {
      intMaxTime = 15;
    }
    else
    {
      intMaxTime = 600;
    }
  }
  intValidPos = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, Translate("RightMostDeckPos"));
  _StepSuccess(intValidPos);
  arrValidXPos.SetSize(0);
  DevGetLabwarePosition(ML_STAR, Translate("RightMostDeckPos"), fltX, fltY, fltZ, fltAngle);
  intXPos = 100;
  intXIncrement = Translate("");
  loopCounter1 = Translate("");
  intXIncrement = (fltX - intXPos) / 10;
  for(loopCounter1 = 0; loopCounter1 <= 9; loopCounter1++)
  {
       intXPos = intXPos + intXIncrement;
       arrValidXPos.AddAsLast(intXPos);
  }
  ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
  if( 0 == tmr1.SetTimer(hslInfinite) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (1 == 1)
    {
      loopCounter2 = loopCounter2 + 1;
      {
        for(loopCounter3 = 0; loopCounter3 < 10;)
        {
          loopCounter3 = loopCounter3 + 1;
          intElapsedTime = tmr1.GetElapsedTime();
          if (intElapsedTime >= intMaxTime)
          {
            break;
          }
          if( 0 == tmr2.SetTimer(5) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == tmr2.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
        }
      }
      {
        for(loopCounter4 = 0; loopCounter4 < 10;)
        {
          loopCounter4 = loopCounter4 + 1;
          if (loopCounter4 == 10)
          {
            intXPos = 100;
          }
          else
          {
            intPos = 10 - loopCounter4;
            intXPos=arrValidXPos.GetAt(intPos-1);
          }
          intElapsedTime = tmr1.GetElapsedTime();
          if (intElapsedTime >= intMaxTime)
          {
            break;
          }
          if( 0 == tmr3.SetTimer(5) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == tmr3.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
        }
      }
      intElapsedTime = tmr1.GetElapsedTime();
      if (intElapsedTime >= intMaxTime)
      {
        break;
      }
    }
  }
  UV_STARPLUS::Lights(0, tmrUVLight, ML_STAR);
  SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
  SANGERGENERAL::StatusDisplay_Update(Translate("UV Cycle System"), Translate(": Complete"), 0);
  MECC::TraceComment(Translate("==========================================================\n\n                                         Cycle System - End\n\n=========================================================="));
}

private function _RetrieveBarcode( variable blnCOREGrips, variable intXAcceleration, variable & strBarcode, sequence & seqSource ) variable {
  private variable arrScannedBarcodes[];
  private variable intLookup;
  private variable _strTime;
  private variable _blnUnknownBarcode;
  private timer timer1;
  strBarcode = 0;
  onerror goto errLabel_3 ;
  err.Clear();
  strBarcode = HSLLabwState::GetLabwareBarcode(ML_STAR, seqSource, 300);
  errLabel_3 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    strBarcode = Translate("");
  }   /* end if from skip handler if no error */
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>> strBarcode = "), strBarcode);
  if (strBarcode == "")
  {
    MECC::TraceComment(Translate("----- Barcode Unknown, will scan -----"));
    if (blnFirstTrigger == 1)
    {
      blnFirstTrigger = 0;
      arrScannedBarcodes.SetSize(0);
    }
    MECC::TraceComment(Translate("********** Scan Barcode **********"));
    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    if (blnSimMode == 1)
    {
      _strTime = TimGetFormattedTime(Translate("%M%S"));
      if( 0 == timer1.SetTimer(1.5) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      strBarcode = StrConcat2(Translate("FakeBarcode_"), _strTime);
    }
    else
    {
      strBarcode = HSLBarcodeReader::Read();
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- Labware barcode: "), strBarcode);
    SANGERGENERAL::StatusDisplay_Update(Translate("Labware barcode: "), strBarcode, 0);
    intLookup = LOOKUP::Lookup(arrScannedBarcodes, strBarcode);
    if (intLookup >= 1)
    {
      MECC::TraceComment(Translate("----- Plate has already been scanned -----"));
      return (2);
    }
    else
    {
      arrScannedBarcodes.AddAsLast(strBarcode);
    }
    intLookup = LOOKUP::Lookup(arrWorklist_SourceBarcodes_Unique, strBarcode);
    if (intLookup >= 1)
    {
      return (1);
    }
    else
    {
      intLookup = LOOKUP::Lookup(arrWorklist_DestinationBarcodes_Unique, strBarcode);
      if (intLookup >= 1)
      {
        return (1);
      }
      else
      {
        MECC::TraceComment(Translate("----- Plate cannot be found in worklist -----"));
        return (0);
      }
    }
  }
  else
  {
    STCC::SetElementBarcodeForSequencePos(ML_STAR, seqSource, -1, hslTrue, "");
    return (1);
  }
}
