private function A_MethodInit( variable intTraceLevel ) void ;
private function B_GetWorklist(  ) variable ;
private function C_CreateSeq(  ) void ;
private function D_LoadInstructions(  ) void ;
private function E_PipettingSteps(  ) void ;
private function F_EndOfRequest(  ) void ;
private function _PIP_AddMedia( sequence & _seqSource, variable _intVolume, variable _strLiquidClass, variable _strChannelPattern ) void ;
private function _PIP_RemoveMediaToWaste( sequence & _seqSource, variable _intVolume, variable _strLiquidClass, variable _strChannelPattern ) void ;
private function _PlateDefinitions( sequence & _seq, variable & _arr[] ) void ;
private function _ScanBarcode( sequence & seq ) variable ;
private function _SimModeTesting(  ) void ;
private function _TransportCORE( variable _strCurrentStep_Details, variable _blnToolEject, variable _intCheckPlate, variable & _blnFirstTransfer ) variable ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private timer tmr;
  if(0){
    AswStatusDialog::Terminate();
  }
  SCAP_STARPLUS::Disconnect();
  if(0){
    UV_STARPLUS::Lights(0, tmr, ML_STAR);
  }
}

private function A_MethodInit( variable intTraceLevel ) void {
  private variable rtnValue;
  private variable strUserEmail; // Pulled from the DB. Generated by IdentifyCurrentUser in A_MethodInit
  private variable intFanSpeed; // Pulled from the JSON, used to set the SCAP fan speed
  private timer tmrHepaFan; // Timer associated with how long the HEPA filters have been running
  private variable rtnSuccess;
  private dialog customDialog_1;
  private variable blnSCAPTraceLevel;
  private variable intTiltComport;
  private variable intKennyComport;
  private variable intKennyTimeout;
  private variable intSCAPComport1;
  private variable intSCAPComport2;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                         Method Initialisation - Start\n\n******************************************************************************************************************************************************"));
  strMethodName = GetMethodName(0);
  arrScannedBarcodes.SetSize(0);
  blnTesting = 1;
  blnSCAPTraceLevel = 0;
  TRACELEVEL::SetTraceLevel(intTraceLevel);
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate(" \/ "));
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE, Translate(" /\ "));
  intKennyTimeout = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("kennyTimeout"), Translate(""));
  intTiltComport = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("tiltClampComport"), Translate(""));
  intKennyComport = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("kennyComport"), Translate(""));
  intSCAPComport1 = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("scapComport1"), Translate(""));
  intSCAPComport2 = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("scapComport2"), Translate(""));
  intFanSpeed = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("fanSpeed"), Translate(""));
  MECC::TraceComment(Translate("********** Create AswStatusDialog **********"));
  rtnSuccess = SANGERGENERAL::StatusDisplay_Init(1);
  if (rtnSuccess == 0)
  {
    abort;
  }
  MECC::TraceComment(Translate("********** Identify User **********"));
  rtnSuccess = SANGERGENERAL::IdentifyCurrentUser(blnTesting, strUsersPreferredName, blnAdmin, strUserEmail);
  if (rtnSuccess == 0)
  {
    MECC::TraceComment(Translate("===== Could not identify user. Method will abort ====="));
    abort;
  }
  MECC::TraceComment(Translate("********** Simulation Mode **********"));
  blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- blnSimMode = "), blnSimMode);
  if (blnSimMode == 1)
  {
    SANGERGENERAL::StatusDisplay_Update(Translate("Hamilton is in: "), Translate("Simulation Mode"), 0);
    if (blnAdmin == 0)
    {
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      if (rtnValue == 2)
      {
        MECC::TraceComment(Translate("User has decided to abort the method"));
        abort;
      }
    }
  }
  else
  {
    SANGERGENERAL::StatusDisplay_Update(Translate("Hamilton is in: "), Translate("Instrument Mode"), 0);
  }
  MECC::TraceComment(Translate("********** Email Settings **********"));
  MECC::TraceComment(Translate("Feature coming soon"));
  MECC::TraceComment(Translate("********** SCAPs **********"));
  SCAP_STARPLUS::Connect(intSCAPComport1, intSCAPComport2, blnSCAPTraceLevel, blnSimMode);
  SANGERGENERAL::StatusDisplay_Update(Translate("Hamilton SCAPs: "), Translate("On"), 0);
  if (blnTesting != 1)
  {
    SCAP_STARPLUS::SetFanSpeed(intFanSpeed);
    SCAP_STARPLUS::SetFanState(1);
  }
  SCAP_STARPLUS::SetLightState(1);
  if( 0 == tmrHepaFan.SetTimer(hslInfinite) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("********** Tilt Stations **********"));
  Hamilton_Tilt_Clamp_Module::Initialize(intTiltComport, Translate("C1"), blnSimMode, 0, devTilt_1);
  Hamilton_Tilt_Clamp_Module::Initialize(intTiltComport, Translate("C2"), blnSimMode, 0, devTilt_2);
  Hamilton_Tilt_Clamp_Module::SetTraceLevel(devTilt_1, intTraceLevel);
  Hamilton_Tilt_Clamp_Module::SetTraceLevel(devTilt_2, intTraceLevel);
  MECC::TraceComment(Translate("********** Barcoding **********"));
  HSLBarcodeReader::SetComPort(intKennyComport);
  HSLBarcodeReader::SetSimulation(blnSimMode);
  HSLBarcodeReader::SetTimeout(intKennyTimeout);
  HSLBarcodeReader::SetErrorRecovery(2);
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                           Method Initialisation - End\n\n******************************************************************************************************************************************************"));
}

private function _SimModeTesting(  ) void {
  private variable loopCounter3;
  private variable arrPendingSimFilePaths[];
  private variable strSimWorklistGenerator;
  private variable intNumberOfPendingSimRequestFiles;
  private variable blnDeletePastPendingFiles;
  blnDeletePastPendingFiles = Translate("False");
  if (blnTesting == 0)
  {
    MECC::TraceComment(Translate("===============================================================\n                                   Method is in production mode\n==============================================================="));
  }
  else
  {
    MECC::TraceComment(Translate("===============================================================\n                        Method is in testing mode\n                     Simluation files will be generated\n==============================================================="));
    arrPendingSimFilePaths.SetSize(0);
    strPendingSimFolderPath = StrConcat2(strActiveRequestFolderPath, Translate("Pending Files\\"));
    FileDirectoryLib::GetFilesInDirectory(strPendingSimFolderPath, Translate("*"), arrPendingSimFilePaths);
    intNumberOfPendingSimRequestFiles=arrPendingSimFilePaths.GetSize();
    if (blnDeletePastPendingFiles == "True")
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### intNumberOfPendingSimRequestFiles = "), intNumberOfPendingSimRequestFiles);
      if (intNumberOfPendingSimRequestFiles != 0)
      {
        MECC::TraceComment(Translate("Previous Pending Sim file present. To be deleted"));
        {
          for(loopCounter3 = 0; loopCounter3 < intNumberOfPendingSimRequestFiles;)
          {
            loopCounter3 = loopCounter3 + 1;
            blnReturn = FileDirectoryLib::DeleteFile(arrPendingSimFilePaths.ElementAt( loopCounter3 -1));
            if (blnReturn == 1)
            {
              MECC::TraceComment(Translate("Error deleting past Pending files"));
              abort;
            }
          }
        }
      }
      FileDirectoryLib::GetFilesInDirectory(strPendingSimFolderPath, Translate("*"), arrPendingSimFilePaths);
      intNumberOfPendingSimRequestFiles=arrPendingSimFilePaths.GetSize();
    }
    SANGERGENERAL::StatusDisplay_Update(Translate("Method will generate simulation worklist files"), Translate(""), 0);
    if (intNumberOfPendingSimRequestFiles == 0)
    {
      strSimWorklistGenerator = StrConcat2(strMethodFolderPath, Translate("Resources\\CSVGenerator.bat"));
      {
        if( 0 == Shell(strSimWorklistGenerator, hslShow, hslSynchronous) )
        {
              MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      MECC::TraceComment(Translate("random worklists have been generated"));
    }
    else
    {
      MECC::TraceComment(Translate("********** Simulation worklists already present **********"));
    }
  }
}

private function B_GetWorklist(  ) variable {
  private variable arrPendingRequestFiles[];
  private variable intArrayPendingRequestFiles_Size;
  private timer timer1;
  private variable strActiveRequestFilePath;
  private variable blnSuccess;
  private file hndWorklist;
  private variable arrWorklist_Processes[];
  private variable arrWorklist_DestinationWellVolumes[];
  private variable arrWorklist_Dates[];
  private variable arrWorklist_SourceWellVolumes[];
  private variable strPendingFolderPath;
  private variable hndWorklist_Process;
  private variable hndWorklist_Date;
  private variable hndWorklist_SourceBarcode;
  private variable hndWorklist_DestinationBarcode;
  private variable intNumberOfUniqueProcesses;
  private variable arrProcesses_Unique[];
  private variable strWorklistDate;
  private variable intNumberOfUniqueDates;
  private variable strCurrentDate;
  private variable arrDates_Unique[];
  private variable rtnValue;
  private variable blnError;
  private variable strDate_FolderFormat;
  private variable strArchiveFolderPath;
  private variable intNumberOfPreviousRunsToday;
  private variable arrArchiveFolderPaths[];
  private variable strArchiveFilePath;
  private variable arr[];
  private variable strDescription;
  private variable blnPass;
  private variable intNumberOfApprovedProcesses;
  private variable strPossibleProcess;
  private variable arrApprovedProcesses[];
  private variable strProcessConfig;
  private variable hndWorklist_SourceWellID;
  private variable strWorklistProcess;
  private variable hndWorklist_DestinationLabwareType;
  private variable hndWorklist_DestinationWellID;
  private variable hndWorklist_SourceLabwareType;
  private variable strWorklistDestinationLabware;
  private variable arrWorklist_DestinationLabwareTypes[];
  private variable arrWorklist_SourceLabwareTypes[];
  private variable loopCounter4;
  private variable loopCounter5;
  private variable loopCounter6;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Find Pending Request - Start\n\n******************************************************************************************************************************************************"));
  strPendingFolderPath = StrConcat2(strActiveRequestFolderPath, Translate("Pending Files\\"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### strPendingFolderPath = "), strPendingFolderPath);
  arrPendingRequestFiles.SetSize(0);
  {
    loopCounter5 = 0;
    while (1 == 1)
    {
      loopCounter5 = loopCounter5 + 1;
      FileDirectoryLib::GetFilesInDirectory(strPendingFolderPath, Translate("*.*"), arrPendingRequestFiles);
      intArrayPendingRequestFiles_Size=arrPendingRequestFiles.GetSize();
      if (intArrayPendingRequestFiles_Size >= 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- Request File Identified: "), arrPendingRequestFiles.ElementAt( 1 -1));
        break;
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - "), Translate(""));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("No worklist found: "), strPendingFolderPath);
        if( 0 == timer1.SetTimer(5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (loopCounter5 >= 3)
        {
          if (lpCount > 1)
          {
            return (1);
          }
        }
      }
    }
  }
  SANGERGENERAL::StatusDisplay_Update(Translate("Identified Pending Worklist File"), Translate(""), 0);
  strActiveRequestFilePath = StrConcat2(strActiveRequestFolderPath, Translate("ActiveRequest.csv"));
  if (blnTesting == 1)
  {
    blnSuccess = FileDirectoryLib::CopyFile(arrPendingRequestFiles.ElementAt( 1 -1), strActiveRequestFilePath);
  }
  else
  {
    blnSuccess = FileDirectoryLib::MoveFile(arrPendingRequestFiles.ElementAt( 1 -1), strActiveRequestFilePath);
  }
  if (blnSuccess == 1)
  {
    MECC::TraceComment(Translate("MoveFile of HSLFileDirectoryLib had an error"));
  }
  else
  {
    MECC::TraceComment(Translate("Request file transfer failed"));
  }
  blnError = 0;
  arrWorklist_SourceBarcodes.SetSize(0);
  arrWorklist_DestinationBarcodes.SetSize(0);
  arrWorklist_Dates.SetSize(0);
  arrWorklist_Processes.SetSize(0);
  arrWorklist_SourceWellIDs.SetSize(0);
  arrWorklist_DestinationWellIDs.SetSize(0);
  arrWorklist_SourceLabwareTypes.SetSize(0);
  arrWorklist_DestinationLabwareTypes.SetSize(0);
  hndWorklist.AddField("Source Barcode", hndWorklist_SourceBarcode, hslString, 255);
  hndWorklist.AddField("Source Well ID", hndWorklist_SourceWellID, hslString, 255);
  hndWorklist.AddField("Source Labware ID", hndWorklist_SourceLabwareType, hslString, 255);
  hndWorklist.AddField("Destination Barcode", hndWorklist_DestinationBarcode, hslString, 255);
  hndWorklist.AddField("Destination Well ID", hndWorklist_DestinationWellID, hslString, 255);
  hndWorklist.AddField("Destination Labware ID", hndWorklist_DestinationLabwareType, hslString, 255);
  hndWorklist.AddField("Date", hndWorklist_Date, hslString, 8);
  hndWorklist.AddField("Process", hndWorklist_Process, hslString, 255);
  hndWorklist.SetDelimiter(hslCSVDelimited);
  if( 0 == hndWorklist.Open(strActiveRequestFilePath, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strActiveRequestFilePath, "HxMetEdCompCmd");
  }
  {
    loopCounter6 = 0;
    while (
       (hndWorklist.Eof() == 0)
    )
    {
      loopCounter6 = loopCounter6 + 1;
      if( 0 == hndWorklist.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>>>>> Worklist Line Count = "), loopCounter6);
      strWorklistProcess = SANGERGENERAL::WorklistEntryValidation(hndWorklist_Process, 1);
      if (strWorklistProcess == "error")
      {
        break;
      }
      arrWorklist_Processes.AddAsLast(strWorklistProcess);
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("----- strWorklistProcess = "), strWorklistProcess, Translate(" (Changed from '"), hndWorklist_Process, Translate("')"), Translate(""));
      SANGERGENERAL::WorklistEntryValidation(hndWorklist_SourceBarcode, 0);
      arrWorklist_SourceBarcodes.AddAsLast(hndWorklist_SourceBarcode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_SourceBarcode = "), hndWorklist_SourceBarcode);
      SANGERGENERAL::WorklistEntryValidation(hndWorklist_DestinationBarcode, 0);
      arrWorklist_DestinationBarcodes.AddAsLast(hndWorklist_DestinationBarcode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_DestinationBarcode = "), hndWorklist_DestinationBarcode);
      SANGERGENERAL::WorklistEntryValidation(hndWorklist_Date, 0);
      arrWorklist_Dates.AddAsLast(hndWorklist_Date);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_Date = "), hndWorklist_Date);
      SANGERGENERAL::WorklistEntryValidation(hndWorklist_SourceWellID, 0);
      arrWorklist_SourceWellIDs.AddAsLast(hndWorklist_SourceWellID);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_SourceWellID = "), hndWorklist_SourceWellID);
      SANGERGENERAL::WorklistEntryValidation(hndWorklist_DestinationWellID, 0);
      arrWorklist_DestinationWellIDs.AddAsLast(hndWorklist_DestinationWellID);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- hndWorklist_DestinationWellID = "), hndWorklist_DestinationWellID);
      strWorklistSourceLabware = SANGERGENERAL::WorklistEntryValidation(hndWorklist_SourceLabwareType, 1);
      arrWorklist_SourceLabwareTypes.AddAsLast(strWorklistSourceLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- strWorklistSourceLabware = "), strWorklistSourceLabware);
      strWorklistDestinationLabware = SANGERGENERAL::WorklistEntryValidation(hndWorklist_DestinationLabwareType, 1);
      arrWorklist_DestinationLabwareTypes.AddAsLast(strWorklistDestinationLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- strWorklistDestinationLabware = "), strWorklistDestinationLabware);
    }
  }
  if( 0 != hndWorklist.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndWorklist.RemoveFields();
  intWorklistLineCount=arrWorklist_SourceBarcodes.GetSize();
  strDescription = Translate("Full Trace of the worklist");
  TRACEARRAY::TraceArray(strDescription, arrWorklist_SourceBarcodes, arrWorklist_SourceWellIDs, arrWorklist_SourceWellVolumes, arrWorklist_SourceLabwareTypes, arrWorklist_DestinationBarcodes, arrWorklist_DestinationWellIDs, arrWorklist_DestinationWellVolumes, arrWorklist_DestinationLabwareTypes, arrWorklist_Dates, arrWorklist_Processes, arr, arr, arr, arr, arr, arr);
  MECC::TraceComment(Translate("===========================================\n   Consolidate worklist into relevant information\n==========================================="));
  SANGERGENERAL::StatusDisplay_Update(Translate("---------- Performing Worklist Checks ----------"), Translate(""), 0);
  arrProcesses_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_Processes, arrProcesses_Unique, 0);
  intNumberOfUniqueProcesses=arrProcesses_Unique.GetSize();
  if (intNumberOfUniqueProcesses > 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Hamilton has identified too many processes in the active worklist. "), Translate("Please copy the worklist and split the processes types into individual worklists"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Active worklist can be found here: "), strActiveRequestFilePath);
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many process types in worklist"), Translate(""), 0);
    abort;
  }
  strProcessType = arrProcesses_Unique.ElementAt( 1 -1);
  JSONSEARCH::GetEveryEntry(Translate(""), Translate("approvedProcessConfig"), arrApprovedProcesses, 0);
  intNumberOfApprovedProcesses=arrApprovedProcesses.GetSize();
  blnPass = Translate("False");
  {
    for(loopCounter4 = 0; loopCounter4 < intNumberOfApprovedProcesses;)
    {
      loopCounter4 = loopCounter4 + 1;
      strPossibleProcess=arrApprovedProcesses.GetAt(loopCounter4-1);
      if (strPossibleProcess == strProcessType)
      {
        blnPass = Translate("True");
      }
    }
  }
  if (blnPass != "True")
  {
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- strProcessType: "), strProcessType);
  SANGERGENERAL::StatusDisplay_Update(Translate("Process Type: "), strProcessType, 0);
  arrDates_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_Dates, arrDates_Unique, 0);
  intNumberOfUniqueDates=arrDates_Unique.GetSize();
  if (intNumberOfUniqueDates > 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// The date stamp of each process does not match. "), Translate(" Please ensure you are using a up-to-date worklist, and all processes are scheduled for the same day"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Active worklist can be found here: "), strActiveRequestFilePath);
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many different dates in worklist"), Translate(""), 0);
    abort;
  }
  strWorklistDate = arrDates_Unique.ElementAt( 1 -1);
  strCurrentDate = TimGetFormattedDate(Translate("%d/%m/%Y"));
  if (strWorklistDate != strCurrentDate)
  {
    if (blnAdmin != 1)
    {
      abort;
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- strWorklistDate =  "), strWorklistDate);
  SANGERGENERAL::StatusDisplay_Update(Translate("Worklist Date: "), strWorklistDate, 0);
  strProcessConfig = StrConcat2(strProcessType, Translate("Config"));
  intMaxSourcePlateNumber = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), strProcessConfig, Translate("maxSourcePlateNumber"));
  arrWorklist_SourceBarcodes_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_SourceBarcodes, arrWorklist_SourceBarcodes_Unique, 0);
  intNumberOfSourcePlates=arrWorklist_SourceBarcodes_Unique.GetSize();
  if (intNumberOfSourcePlates > intMaxSourcePlateNumber)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("########################################################"), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Hamilton has identified too many source plates in the worklist. "), Translate("Please copy the worklist and split the number of unique source plates down"));
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many source plates in the worklist"), Translate(""), 0);
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- intNumberOfSourcePlates = "), intNumberOfSourcePlates);
  Util2::Debug::TraceArray(Translate(" ----- Unique Source Barcodes from the Worklist ----- "), arrWorklist_SourceBarcodes_Unique);
  SANGERGENERAL::StatusDisplay_Update(Translate("Number of Source Plates: "), intNumberOfSourcePlates, 0);
  strProcessConfig = StrConcat2(strProcessType, Translate("Config"));
  intMaxDestinationPlateNumber = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), strProcessConfig, Translate("maxDestinationPlateNumber"));
  arrWorklist_DestinationBarcodes_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrWorklist_DestinationBarcodes, arrWorklist_DestinationBarcodes_Unique, 0);
  intNumberOfDestinationPlates=arrWorklist_DestinationBarcodes_Unique.GetSize();
  if (intNumberOfDestinationPlates > intMaxDestinationPlateNumber)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("########################################################"), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Hamilton has identified too many Destination plates in the worklist. "), Translate("Please copy the worklist and split the number of unique Destination plates down"));
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many destination plates in the worklist"), Translate(""), 0);
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### intNumberOfDestinationPlates = "), intNumberOfDestinationPlates);
  Util2::Debug::TraceArray(Translate(" ----- Unique Destination Barcodes from the Worklist ----- "), arrWorklist_DestinationBarcodes_Unique);
  SANGERGENERAL::StatusDisplay_Update(Translate("Number of Destination Plates: "), intNumberOfDestinationPlates, 0);
  arrInWorklistBarcodes = HSLExtensions::Array::Concat(arrWorklist_SourceBarcodes_Unique, arrWorklist_DestinationBarcodes_Unique);
  strDate_FolderFormat = TimGetFormattedDate(Translate("%Y_%m_%d"));
  strArchiveFolderPath = StrConcat4(strActiveRequestFolderPath, Translate("Archive\\"), strDate_FolderFormat, Translate("\\"));
  rtnValue = FileDirectoryLib::CheckIfDirectoryExists(strArchiveFolderPath);
  if (rtnValue == 0)
  {
    FileDirectoryLib::CreateDirectory(strArchiveFolderPath);
  }
  arrArchiveFolderPaths.SetSize(0);
  FileDirectoryLib::GetSubdirectoriesOfDirectory(strArchiveFolderPath, arrArchiveFolderPaths);
  intNumberOfPreviousRunsToday=arrArchiveFolderPaths.GetSize();
  if (lpCount == 1)
  {
    intCurrentRunNumber = intNumberOfPreviousRunsToday + 1;
  }
  else
  {
    intCurrentRunNumber = intNumberOfPreviousRunsToday;
  }
  strCurrentRunFolderPath = StrConcat4(strArchiveFolderPath, Translate("Run "), intCurrentRunNumber, Translate("\\"));
  rtnValue = FileDirectoryLib::CheckIfDirectoryExists(strCurrentRunFolderPath);
  if (rtnValue == 0)
  {
    FileDirectoryLib::CreateDirectory(strCurrentRunFolderPath);
  }
  strArchiveFilePath = StrConcat4(strCurrentRunFolderPath, Translate(""), lpCount, Translate("_OriginalWorklist.csv"));
  FileDirectoryLib::MoveFile(strActiveRequestFilePath, strArchiveFilePath);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- Worklist successfully moved to archive folder"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- File Location: "), strArchiveFilePath);
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                     Find Pending Request - End\n\n******************************************************************************************************************************************************"));
  return (0);
}

private function E_PipettingSteps(  ) void {
  private variable intStep;
  private variable strCurrentStep;
  private variable intActivePlate;
  private variable intClampTiltSpeed;
  private variable strCurrentStep_Details;
  private variable strCurrentStep_Event;
  private variable intAngle;
  private variable loopCounter1;
  private variable blnLoopBreak;
  private variable intNumberOfPlatesProcessed;
  private variable blnFirstTransfer;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                        Pipetting Steps - Start\n\n******************************************************************************************************************************************************"));
  SANGERGENERAL::StatusDisplay_Update(Translate("===== Pipetting steps to begin ====="), Translate(""), 0);
  blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_1000ulFiltered, Translate("TipCounter_1mLFiltered"), 8);
  JSONSEARCH::GetEveryEntry(Translate(""), Translate("mediaChangeWorkflow"), arrWorkflow, 0);
  Util2::Debug::TraceArray(Translate("===== Arrray of steps to be performed ====="), arrWorkflow);
  intStep = 1;
  strCurrentStep_Event = Translate("");
  strCurrentStep_Details = Translate("");
  intActivePlate = 1;
  blnLoopBreak = 0;
  {
    while (1 == 1)
    {
      // Find the next step in the method
      strCurrentStep = arrWorkflow.GetAt(intStep - 1);
      // Identify the event & details from the step
      strCurrentStep_Event = StrLeft(strCurrentStep, StrFind(strCurrentStep, "_"));
      strCurrentStep_Details = StrRight(strCurrentStep,(StrGetLength(strCurrentStep) - StrFind(strCurrentStep, "_") - 1));
      // Trace that out
      Trace(">>>>> strCurrentStep_Event: ", strCurrentStep_Event);
      Trace(">>>>> strCurrentStep_Details: ", strCurrentStep_Details);
      if (strCurrentStep_Event == "tilt")
      {
        if(0){
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, strMethodName, Translate("SGE"), Translate(""));
        }
        intAngle = StrIVal(strCurrentStep_Details);
        intClampTiltSpeed = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("clampTiltSpeed"), Translate(""));
        Hamilton_Tilt_Clamp_Module::Tilt(devTilt_1, intClampTiltSpeed, intAngle);
        Hamilton_Tilt_Clamp_Module::Tilt(devTilt_2, intClampTiltSpeed, intAngle);
        if(0){
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, strMethodName, Translate("SGE"), Translate(""));
        }
      }
      if (strCurrentStep_Event == "transportCORE")
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, strMethodName, Translate("SGE"), Translate(""));
        intNumberOfPlatesProcessed = _TransportCORE(strCurrentStep_Details, 0, 2, blnFirstTransfer);
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, strMethodName, Translate("SGE"), Translate(""));
      }
      if (strCurrentStep_Event == "increment")
      {
        MECC::TraceComment(Translate("----- Move to next plate -----"));
        {
          for(loopCounter1 = 0; loopCounter1 < 2;)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_2 ;
            err.Clear();
            SeqRemoveAt(arrAllSequences.ElementAt( 3 -1), 1);
            errLabel_2 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              MECC::TraceComment(Translate("SeqRemoveAll Failed"));
              blnLoopBreak = 1;
            }   /* end if from skip handler if no error */
          }
        }
        if (blnLoopBreak == 1)
        {
          break;
        }
        intActivePlate = intActivePlate + 2;
        intStep = 0;
        blnFirstTransfer = 0;
      }
      intStep = intStep + 1;
    }
  }
}

private function D_LoadInstructions(  ) void {
  private variable intDaysSinceClean;
  private variable strMessage;
  private variable intMaxDaysBetweenUVCycles;
  private variable blnTips_Use1mL;
  private variable blnTips_Use4mL;
  private variable intTipsNeeded_4mL;
  private variable intTipsPerPlate_4mL;
  private variable intTipsNeeded_1mL;
  private variable blnClean;
  private variable intTipsPerPlate_1mL;
  private variable blnCleanType;
  private variable intMaxTimeBetweenDeepCleans;
  private variable strDialogTitle;
  private variable strDialogMessage;
  private variable fltAngle;
  private variable fltX;
  private variable fltY;
  private variable fltZ;
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  if(0){
    blnClean = 0;
    if (lpCount > 1)
    {
    }
    intDaysSinceClean = SANGERGENERAL::GetDaysSinceClean(blnAdmin);
    intMaxDaysBetweenUVCycles = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("maxTimeBetweenUV"), Translate(""));
    if (intDaysSinceClean > intMaxDaysBetweenUVCycles)
    {
      blnClean = 1;
    }
    blnTips_Use1mL = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("mediachangeConfig"), Translate("use1mLTips"));
    intTipsPerPlate_1mL = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("mediachangeConfig"), Translate("tips1mLPerPlate"));
    intTipsNeeded_1mL = intTipsPerPlate_1mL * intNumberOfSourcePlates;
    blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_1000ulFiltered, Translate("TipCounter_1mLFiltered"), intTipsNeeded_1mL);
    if (blnTipReload == 1)
    {
      blnClean = 1;
    }
    blnTips_Use4mL = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("mediachangeConfig"), Translate("use4mLTips"));
    intTipsPerPlate_4mL = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("mediachangeConfig"), Translate("tips4mLPerPlate"));
    intTipsNeeded_4mL = intTipsPerPlate_4mL * intNumberOfSourcePlates;
    blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_4mLFiltered, Translate("TipCounter_4mLFiltered"), intTipsNeeded_4mL);
    if (blnTipReload == 1)
    {
      blnClean = 1;
    }
    if (intDaysSinceClean >= 2)
    {
      blnClean = 1;
    }
    if (blnClean == 0)
    {
      return;
    }
    intMaxTimeBetweenDeepCleans = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("maxTimeBetweenDeepClean"), Translate(""));
    if (intDaysSinceClean <= intMaxTimeBetweenDeepCleans)
    {
      blnCleanType = 1;
      strMessage = Translate("Short clean required");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// "), strMessage);
    }
    else
    {
      blnCleanType = 2;
      strMessage = Translate("Deep clean required");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// "), strMessage);
    }
    SANGERGENERAL::StatusDisplay_Update(strMessage, Translate(""), 0);
    if (blnCleanType >= 1)
    {
      AswStandardDialogs::Initialize();
      AswStandardDialogs::SetDefaultLanguage(AswStandardDialogs::DialogLanguage::English);
      strDialogTitle = StrConcat2(Translate("STARplus - Instrument Cleaning"), Translate(""));
      strImageFilePath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("deckClear"), Translate(""));
      strDialogMessage = StrConcat8(Translate("Please remove all of the carriers from the Hamilton."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\n"), Translate("Press 'Ok' to continue the method"));
      DevGetLabwarePosition(ML_STAR, Translate("RightMostDeckPos"), fltX, fltY, fltZ, fltAngle);
      ML_STAR._55AA8CFA_FB6C_4691_8C8C_8D410E2123FD("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"); // XLMoveToPosition
      strImageFolderPath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("folderPath"), Translate(""));
      strImagePath = StrConcat2(strImageFolderPath, strImageFilePath);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
      AswStandardDialogs::MessageDialogWithImage(strDialogTitle, AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, strDialogMessage, strImagePath, 0);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
      strImageFilePath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("rightDeckClean"), Translate(""));
      strDialogMessage = StrConcat8(Translate("Please clean the right side of the Hamilton"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\n"), Translate("Press 'Ok' to continue the method"));
      ML_STAR._55AA8CFA_FB6C_4691_8C8C_8D410E2123FD("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"); // XLMoveToPosition
      strImageFolderPath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("folderPath"), Translate(""));
      strImagePath = StrConcat2(strImageFolderPath, strImageFilePath);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
      AswStandardDialogs::MessageDialogWithImage(strDialogTitle, AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, strDialogMessage, strImagePath, 0);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
      strImageFilePath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("centrifugeOpen"), Translate(""));
      strDialogMessage = StrConcat8(Translate("Please inspect the centrifuge"), Translate("Wipe the surfaces down if necessary"), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\n"), Translate("Press 'Ok' to continue the method"));
      strImageFolderPath = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("imageFilePath"), Translate("folderPath"), Translate(""));
      strImagePath = StrConcat2(strImageFolderPath, strImageFilePath);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
      AswStandardDialogs::MessageDialogWithImage(strDialogTitle, AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, strDialogMessage, strImagePath, 0);
      SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
      SANGERGENERAL::ReloadTips(ML_STAR, ML_STAR.Tips_1000ulFiltered, 0);
      SANGERGENERAL::ReloadTips(ML_STAR, ML_STAR.Tips_4mLFiltered, 0);
      AswStandardDialogs::Terminate();
      UV_STARPLUS::Lights(1, tmrUVLight, ML_STAR);
      frkHandle = Fork("_CycleSystem");
      Trace("----- frkHandle = ", frkHandle);
      if (0 == frkHandle)
      {
           err.Raise(0, "Failed to fork: _CycleSystem");
      }
    }
    if (blnCleanType == 2)
    {
    }
  }
  SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 0);
  if(0){
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqTransport_Loading, Translate("Please load source plates here"));
  }
  SANGERGENERAL::DoorLock(ML_STAR, blnSimMode, 1);
}

private function _PlateDefinitions( sequence & _seq, variable & _arr[] ) void {
  private variable _int;
  _arr.SetSize( 0);
  _arr.SetSize(0);
  _int = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("labwareConfig"), Translate("gripHeight"));
  _arr.AddAsLast(_int);
  _int = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("labwareConfig"), Translate("gripWidth"));
  _arr.AddAsLast(_int);
  _int = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("labwareConfig"), Translate("gripWidthOpen"));
  _arr.AddAsLast(_int);
  _int = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("labwareConfig"), Translate("gripForce"));
  _arr.AddAsLast(_int);
  _int = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("labwareConfig"), Translate("gripSpeed"));
  _arr.AddAsLast(_int);
  _int = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("labwareConfig"), Translate("zSpeedGet"));
  _arr.AddAsLast(_int);
  _int = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("labwareConfig"), Translate("zSpeedPlace"));
  _arr.AddAsLast(_int);
  _int = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("labwareConfig"), Translate("xAcceleration"));
  _arr.AddAsLast(_int);
  _int = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("autoFlaskConfig"), Translate("labwareConfig"), Translate("platePress"));
  _arr.AddAsLast(_int);
}

private function F_EndOfRequest(  ) void {
  private variable strArchiveFilePath;
  private variable strSchemaFilePath;
  private variable strActiveFilePath;
  private variable strMethodsFolderPath;
  MECC::TraceComment(Translate("====================================\n                    Archive the Worklist\n===================================="));
  MECC::TraceComment(Translate("***** Delete Shema File *****"));
  strMethodsFolderPath = FilGetMethodsPath();
  strSchemaFilePath = StrConcat2(strActiveRequestFolderPath, Translate("schema.ini"));
  FileDirectoryLib::DeleteFile(strSchemaFilePath);
  MECC::TraceComment(Translate("***** Move Active Worklist *****"));
  strActiveFilePath = StrConcat2(strActiveRequestFolderPath, Translate("ActiveRequest.csv"));
  strArchiveFilePath = StrConcat4(strCurrentRunFolderPath, Translate(""), lpCount, Translate("_AccurateWorklist.csv"));
  FileDirectoryLib::MoveFile(strActiveFilePath, strArchiveFilePath);
  MECC::TraceComment(Translate("====================================\n                    Update User Log with current date\n===================================="));
}

private function _TransportCORE( variable _strCurrentStep_Details, variable _blnToolEject, variable _intCheckPlate, variable & _blnFirstTransfer ) variable {
  private variable _strLabwareID;
  private variable _strPositionID;
  private variable _loopCounter3;
  private variable _intCOREChannelToUse;
  private variable _loopCounter1;
  private variable _strBarcode;
  private variable _blnEject;
  private variable _blnPressPlate;
  private variable _blnCheckPlate;
  private variable intSeqLength_Src;
  private variable strBarcode;
  private variable strLabID;
  private variable strPosID;
  private sequence _seqDestination;
  private sequence _seqSource;
  private variable _strMessage;
  private variable intSourceAvailablePlates;
  private variable _strDestinationLocation;
  private variable _intTemp;
  private variable _strSourceLocation;
  private variable _intLength;
  private variable _intNumberOfPossibleSequences;
  private variable _intDestSeqCheck;
  private variable _intSrcSeqCheck;
  private variable _arrPlateDefinitions[];
  private variable _intSeqDest_End;
  private variable _intCount;
  private variable _intSeqDest_Count;
  private variable _intSeqDest_Start;
  private variable _arrBarcodes_Destination[];
  private variable _intSourceAvailablePlates;
  private variable _intSeqSrc_Count;
  private variable _intSeqSrc_End;
  private variable _loopCounter2;
  private variable _intSeqSrc_Start;
  private variable _arrBarcodes_Source[];
  private variable _intSeqMaxTransfers;
  private variable _intSeqDest_MaxNum;
  private variable _intSeqSrc_MaxNum;
  _intCOREChannelToUse = JSONSEARCH::GetSpecificEntry(Translate(""), Translate("starPlusConfig"), Translate("channelForCOREGrips"), Translate(""));
  _blnEject = 0;
  _intSrcSeqCheck = 0;
  _intDestSeqCheck = 0;
  SeqRemoveAll(_seqSource);
  SeqRemoveAll(_seqDestination);
  _intSourceAvailablePlates = 0;
  _arrBarcodes_Destination.SetSize(0);
  _arrBarcodes_Source.SetSize(0);
  _blnPressPlate = 0;
  _blnCheckPlate = 0;
  if (_intCheckPlate == 1)
  {_blnCheckPlate = 1;}
  if (_intCheckPlate == 2)
  {_blnPressPlate = 1;}
  if (_intCheckPlate == 3)
  {_blnPressPlate = 1;
     _blnCheckPlate = 1;}
  _intTemp = StrFind(_strCurrentStep_Details, Translate("To"));
  _strSourceLocation = StrLeft(_strCurrentStep_Details, _intTemp);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Source Location: "), _strSourceLocation);
  _intTemp = StrFind(_strCurrentStep_Details, Translate("To"));
  _intLength = StrGetLength(_strCurrentStep_Details);
  _intTemp = _intLength - _intTemp;
  _intTemp = _intTemp - 2;
  _strDestinationLocation = StrRight(_strCurrentStep_Details, _intTemp);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Destination Location: "), _strDestinationLocation);
  _intNumberOfPossibleSequences=arrAllSequences.GetSize();
  {
    for(_loopCounter1 = 0; _loopCounter1 < _intNumberOfPossibleSequences;)
    {
      _loopCounter1 = _loopCounter1 + 1;
      if (_strSourceLocation == arrLabwareVariants.ElementAt( _loopCounter1 -1))
      {
        SeqCopySequence(_seqSource, arrAllSequences.ElementAt( _loopCounter1 -1));
        _intSeqSrc_MaxNum=arrNumberOfVariants.GetAt(_loopCounter1-1);
      }
      else
      {
        _intSrcSeqCheck = _intSrcSeqCheck + 1;
      }
      if (_strDestinationLocation == arrLabwareVariants.ElementAt( _loopCounter1 -1))
      {
        SeqCopySequence(_seqDestination, arrAllSequences.ElementAt( _loopCounter1 -1));
        _intSeqDest_MaxNum=arrNumberOfVariants.GetAt(_loopCounter1-1);
      }
      else
      {
        _intDestSeqCheck = _intDestSeqCheck + 1;
      }
    }
  }
  if (_intSeqDest_MaxNum <= _intSeqSrc_MaxNum)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Dest seq is limiter"), Translate(""));
    _intSeqMaxTransfers = _intSeqDest_MaxNum;
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Src seq is limiter"), Translate(""));
    _intSeqMaxTransfers = _intSeqSrc_MaxNum;
  }
  if (_intSrcSeqCheck == _intNumberOfPossibleSequences)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Could not identify source sequence"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Source sequence successfully identified"), Translate(""));
  }
  if (_intDestSeqCheck == _intNumberOfPossibleSequences)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Could not identify destination sequence"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Destination sequence successfully identified"), Translate(""));
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== Max Transfer Number: "), _intSeqMaxTransfers);
  _intSeqSrc_Start = _seqSource.GetCurrentPosition();
  _intSeqSrc_End = _seqSource.GetCount();
  _intTemp = _intSeqSrc_End - _intSeqSrc_Start;
  _intSeqSrc_Count = _intTemp + 1;
  if (_intSeqSrc_Count > _intSeqMaxTransfers)
  {
  }
  else
  {
    _intSeqMaxTransfers = _intSeqSrc_Count;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("..... _intSeqSrc_Count = "), _intSeqSrc_Count);
  _intSeqDest_Start = _seqDestination.GetCurrentPosition();
  _intSeqDest_End = _seqDestination.GetCount();
  _intTemp = _intSeqDest_End - _intSeqDest_Start;
  _intSeqDest_Count = _intTemp + 1;
  if (_intSeqDest_Count > _intSeqMaxTransfers)
  {
  }
  else
  {
    _intSeqMaxTransfers = _intSeqDest_Count;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("..... _intSeqDest_Count: "), _intSeqDest_Count);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("========== Active source sequence positions =========="), Translate(""));
  _intCount = 0;
  {
    for(_loopCounter2 = 0; _loopCounter2 < _intSeqSrc_Count;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      if (_loopCounter2 > _intSeqMaxTransfers)
      {
        _seqSource.SetCount(_intSeqMaxTransfers);
        break;
      }
      _intCount = _loopCounter2 + 1;
      _intCount = _intCount - _intSeqSrc_Start;
      _strLabwareID = SeqGetLabwareId(_seqSource);
      _strPositionID = SeqGetPositionId(_seqSource);
      DevGetBarcodeData(ML_STAR, _strLabwareID, _strPositionID, _strBarcode);
      if (_strBarcode == "")
      {
        if (_blnFirstTransfer == 0)
        {
          _strMessage = StrConcat8(Translate("----- Available sequence position "), _loopCounter2, Translate(": "), _strLabwareID, Translate("."), _strPositionID, Translate(" -- "), _strBarcode);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, _strMessage, Translate(""));
        }
        else
        {
          _intSeqSrc_End = _intSeqSrc_End - 1;
          SeqRemoveAt(_seqSource, _intCount);
        }
      }
      else
      {
        _strMessage = StrConcat8(Translate("----- Available sequence position "), _loopCounter2, Translate(": "), _strLabwareID, Translate("."), _strPositionID, Translate(" -- "), _strBarcode);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, _strMessage, Translate(""));
      }
      if (_loopCounter2 < _intSeqSrc_Count)
      {
        SeqIncrement(_seqSource, 1);
      }
      else
      {
        _seqSource.SetCount(_intSeqSrc_End);
      }
    }
  }
  _seqSource.SetCurrentPosition(_intSeqSrc_Start);
  if (_intSeqSrc_End < _intSeqMaxTransfers)
  {
    _intSeqMaxTransfers = _intSeqSrc_End;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("========== Active destination sequence positions =========="), Translate(""));
  _intCount = 0;
  {
    for(_loopCounter3 = 0; _loopCounter3 < _intSeqDest_Count;)
    {
      _loopCounter3 = _loopCounter3 + 1;
      if (_intCount >= _intSeqMaxTransfers)
      {
        _seqDestination.SetCount(_intSeqMaxTransfers);
        break;
      }
      _strLabwareID = SeqGetLabwareId(_seqDestination);
      _strPositionID = SeqGetPositionId(_seqDestination);
      DevGetBarcodeData(ML_STAR, _strLabwareID, _strPositionID, _strBarcode);
      if (_strBarcode == "")
      {
        _strMessage = StrConcat8(Translate("----- Available sequence position "), _loopCounter3, Translate(": "), _strLabwareID, Translate("."), _strPositionID, Translate(" -- "), _strBarcode);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, _strMessage, Translate(""));
        if (_loopCounter3 < _intSeqDest_Count)
        {
          SeqIncrement(_seqDestination, 1);
        }
      }
      else
      {
        _arrBarcodes_Destination.AddAsLast(_strBarcode);
        SeqRemoveAt(_seqDestination, _intCount);
        _intSeqDest_End = _intSeqDest_End - 1;
      }
      _intCount = _loopCounter3 + 1;
      _intCount = _intCount - _intSeqDest_Start;
    }
  }
  _seqDestination.SetCurrentPosition(_intSeqDest_Start);
  _seqDestination.SetCount(_intSeqDest_End);
  _intSeqSrc_Start = _seqSource.GetCurrentPosition();
  _intSeqSrc_End = _seqSource.GetCount();
  _intTemp = _intSeqSrc_End - _intSeqSrc_Start;
  _intSeqSrc_Count = _intTemp + 1;
  if (_intSeqSrc_Count > _intSeqMaxTransfers)
  {
  }
  else
  {
    _intSeqMaxTransfers = _intSeqSrc_Count;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("..... _intSeqSrc_Count = "), _intSeqSrc_Count);
  _intSeqDest_Start = _seqDestination.GetCurrentPosition();
  _intSeqDest_End = _seqDestination.GetCount();
  _intTemp = _intSeqDest_End - _intSeqDest_Start;
  _intSeqDest_Count = _intTemp + 1;
  if (_intSeqDest_Count > _intSeqMaxTransfers)
  {
  }
  else
  {
    _intSeqMaxTransfers = _intSeqDest_Count;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("..... _intSeqDest_Count: "), _intSeqDest_Count);
  _blnFirstTransfer = 1;
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("------------------------"), Translate(""), Translate(""), Translate(""));
  {
    _loopCounter1 = 0;
    while (
       (_seqSource.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, _seqSource, 1);
      _loopCounter1 = _loopCounter1 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">>>>> Transport loop: "), _loopCounter1, Translate("/"), _intSeqMaxTransfers);
      _PlateDefinitions(_seqSource, _arrPlateDefinitions);
      if (_loopCounter1 == intSeqLength_Src)
      {
        _blnEject = _blnToolEject;
      }
      if (_strSourceLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            Hamilton_Tilt_Clamp_Module::ClampOpen(intTiltModuleID_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampOpen(intTiltModuleID_2);
          }
        }
      }
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      if (_strSourceLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(intTiltModuleID_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(intTiltModuleID_2);
          }
        }
      }
      strBarcode = _ScanBarcode(_seqSource);
      if (_strDestinationLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            Hamilton_Tilt_Clamp_Module::ClampOpen(intTiltModuleID_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampOpen(intTiltModuleID_2);
          }
        }
      }
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      if (_strDestinationLocation == "Tilt")
      {
        if (blnSimMode == 0)
        {
          if (_loopCounter1 == 1)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(intTiltModuleID_1);
          }
          if (_loopCounter1 == 2)
          {
            Hamilton_Tilt_Clamp_Module::ClampClose(intTiltModuleID_2);
          }
        }
      }
      strLabID = SeqGetLabwareId(_seqDestination);
      strPosID = SeqGetPositionId(_seqDestination);
      DevSetBarcodeData(ML_STAR, strLabID, strPosID, strBarcode);
      SeqIncrement(_seqSource, 1);
      SeqIncrement(_seqDestination, 1);
      if (
         (_seqSource.GetCurrentPosition() > 0 && _seqSource.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    _seqSource.SetMax(_seqSource.GetTotal());
    _seqSource.SetCurrentPosition(1);
  }
  return (_loopCounter1);
}

private function C_CreateSeq(  ) void {
  private variable strLoadIDSuffix;
  private variable strLoadID;
  private variable arrDeckViewReset[];
  private variable loopCounter12;
  private variable loopCounter3;
  private variable loopCounter1;
  private variable intFound;
  private variable strLabwareVariant;
  private variable strLabwareID;
  private variable index;
  private variable loopCounter2;
  private variable loopCounter7;
  private variable rtnLookup;
  private variable intCount;
  private variable intMaxPossibleLabware;
  private variable strLabwarePrefix;
  private variable loopCounter4;
  private sequence seq;
  private variable arrLabwareOnDeck[];
  private variable strPositionID;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Sequence Creation - Start\n\n******************************************************************************************************************************************************"));
  arrAllSequences.SetSize(0);
  arrLabwareVariants.SetSize(0);
  arrLabwareVariants.AddAsLast(Translate("Stacked"));
  arrLabwareVariants.AddAsLast(Translate("Active"));
  arrLabwareVariants.AddAsLast(Translate("Loading"));
  arrLabwareVariants.AddAsLast(Translate("Tilt"));
  arrLabwareVariants.AddAsLast(Translate("HHS"));
  intNumberOfLabwareVariants=arrLabwareVariants.GetSize();
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- intNumberOfLabwareVariants: "), intNumberOfLabwareVariants);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("----- Array of the possible labware variants -----"), arrLabwareVariants);
  if (strWorklistSourceLabware == "autoflask")
  {
    strLabwarePrefix = Translate("Greiner_AutoFlask");
    SeqCopySequence(seq, ML_STAR.maxAutoflasks);
    intMaxPossibleLabware = SeqGetTotal(seq);
  }
  arrLabwareOnDeck.SetSize(0);
  seq.SetCurrentPosition(1);
  {
    for(loopCounter1 = 0; loopCounter1 < intMaxPossibleLabware;)
    {
      loopCounter1 = loopCounter1 + 1;
      strLabwareID = SeqGetLabwareId(seq);
      arrLabwareOnDeck.AddAsLast(strLabwareID);
      SeqIncrement(seq, 1);
    }
  }
  SeqResetSequenceIndexes(seq);
  arrNumberOfVariants.SetSize(0);
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfLabwareVariants;)
    {
      loopCounter2 = loopCounter2 + 1;
      index = 0;
      strLabwareVariant=arrLabwareVariants.GetAt(loopCounter2-1);
      {
        for(loopCounter3 = 0; loopCounter3 < intMaxPossibleLabware;)
        {
          loopCounter3 = loopCounter3 + 1;
          strLabwareID=arrLabwareOnDeck.GetAt(loopCounter3-1);
          strLabwareVariant = StrMakeLower(strLabwareVariant);
          strLabwareID = StrMakeLower(strLabwareID);
          intFound = StrFind(strLabwareID, strLabwareVariant);
          if (intFound >= 1)
          {
            index = index + 1;
          }
        }
      }
      arrNumberOfVariants.AddAsLast(index);
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("----- Number of each labware variant -----"), arrNumberOfVariants);
  SeqRemoveAll(seqTransport_Stacked);
  arrAllSequences.AddAsLast(seqTransport_Stacked);
  SeqRemoveAll(seqTransport_Active);
  arrAllSequences.AddAsLast(seqTransport_Active);
  SeqRemoveAll(seqTransport_Loading);
  arrAllSequences.AddAsLast(seqTransport_Loading);
  SeqRemoveAll(seqTransport_Tilt);
  arrAllSequences.AddAsLast(seqTransport_Tilt);
  SeqRemoveAll(seqTransport_HHS);
  arrAllSequences.AddAsLast(seqTransport_HHS);
  {
    for(loopCounter4 = 0; loopCounter4 < intNumberOfLabwareVariants;)
    {
      loopCounter4 = loopCounter4 + 1;
      rtnLookup = LOOKUP::Lookup(arrLabwareVariants, arrLabwareVariants.ElementAt( loopCounter4 -1));
      intCount=arrNumberOfVariants.GetAt(rtnLookup-1);
      if (intNumberOfSourcePlates < intCount)
      {
        intCount = intNumberOfSourcePlates;
      }
      {
        for(loopCounter7 = 0; loopCounter7 < intCount;)
        {
          loopCounter7 = loopCounter7 + 1;
          if (loopCounter7 < 10)
          {
            strLoadIDSuffix = StrConcat2(Translate("0"), loopCounter7);
          }
          else
          {
            strLoadIDSuffix = StrConcat2(Translate(""), loopCounter7);
          }
          strLoadID = StrConcat8(strLabwarePrefix, Translate("_"), arrLabwareVariants.ElementAt( loopCounter4 -1), Translate("_"), Translate("00"), strLoadIDSuffix, Translate(""), Translate(""));
          if (arrLabwareVariants.ElementAt( loopCounter4 -1) != "stacked")
          {
            strPositionID = Translate("A1");
            DevSetBarcodeData(ML_STAR, strLoadID, strPositionID, Translate(""));
            SeqAdd(arrAllSequences.ElementAt( loopCounter4 -1), strLoadID, strPositionID);
          }
        }
      }
      if (arrLabwareVariants.ElementAt( loopCounter4 -1) == "tilt")
      {
        SeqRemoveAll(seqPipetting);
        SeqCopySequence(seqPipetting, seqTransport_Tilt);
        Util2::Debug::TraceSequence(seqPipetting);
      }
      SeqResetSequenceIndexes(arrAllSequences.ElementAt( loopCounter4 -1));
      Util2::Debug::TraceSequence(arrAllSequences.ElementAt( loopCounter4 -1));
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- Sequences successfully generated"), Translate(""));
  SeqCopySequence(seqTransport_Stacked, arrAllSequences.ElementAt( 1 -1));
  SeqCopySequence(seqTransport_Active, arrAllSequences.ElementAt( 2 -1));
  SeqCopySequence(seqTransport_Loading, arrAllSequences.ElementAt( 3 -1));
  SeqCopySequence(seqTransport_Tilt, arrAllSequences.ElementAt( 4 -1));
  SeqCopySequence(seqTransport_HHS, arrAllSequences.ElementAt( 5 -1));
  arrDeckViewReset.SetSize(0);
  {
    for(loopCounter12 = 0; loopCounter12 < intMaxPossibleLabware;)
    {
      loopCounter12 = loopCounter12 + 1;
      arrDeckViewReset.AddAsLast(0);
    }
  }
  if(0){
    DeckVisualize::UpdateLoadedLabware(ML_STAR, arrLabwareOnDeck, arrDeckViewReset, Translate(""));
  }
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Sequence Creation - End\n\n******************************************************************************************************************************************************"));
}

private function _PIP_RemoveMediaToWaste( sequence & _seqSource, variable _intVolume, variable _strLiquidClass, variable _strChannelPattern ) void {
  private variable blnPreWet;
  private variable intRetractHeight;
  private variable intMaxTipVolume;
  private variable intFixedHeight;
  private variable strLogFilePath;
  private variable strMappingFilePath;
  private variable strMappingFileName;
  private variable hndTrackerFile_TStatusStateDescription;
  private variable hndTrackerFile_TPositionID;
  private variable hndTrackerFile_SLabwareID;
  private variable hndMappingFile_TPositionId;
  private variable hndMappingFile_TRackBC;
  private variable loopCounter8;
  private variable hndMappingFile_TVolume;
  private variable hndMappingFile_TStatusSummary;
  private variable strTrackerFilePath;
  private variable hndTrackerFile_TStatusSummary;
  private variable hndTrackerFile_TLabwareID;
  private variable hndTrackerFile_SPositionID;
  private variable hndMappingFile_ActionDateTime;
  private variable hndTrackerFile_TimeStamp;
  private variable hndMappingFile_SPositionId;
  private variable hndMappingFile_SLabwareId;
  private variable hndMappingFile_TPositionBC;
  private variable hndMappingFile_UserName;
  private variable hndTrackerFile_Volume;
  private variable strCurrentTime;
  private variable hndMappingFile_TLabwareId;
  private variable strCurrentDate;
  private variable rtnFileExists;
  private variable hndMappingFile_SPositionBC;
  private variable hndMappingFile_TSumStateDescription;
  private variable hndTrackerFile_SRackBC;
  private variable hndTrackerFile_TRackBC;
  private variable hndMappingFile_SRackBC;
  private variable hndMappingFile_RecordId;
  private file hndMappingFile;
  private file hndTrackerFile;
  private variable hndTrackerFile_Action;
  private variable intLength;
  private variable strFunctionName;
  private variable hndTrackerFile_User;
  private variable _strSrcLabID;
  private variable _intSrcSeq_Start;
  private variable _fltTransferVolume_Display;
  private variable _intTransferVolume;
  private variable _intTipType;
  private variable _intSrcSeq_End;
  private variable _strBarcode;
  private variable _intNumberOfTransfers;
  private variable _strSrcPosID;
  private variable _loopCounter10;
  private variable _intMaxTipVolume;
  private sequence _seqDest;
  private sequence _seqSrc;
  private sequence _seqTip;
  private variable _blnPreWet;
  private variable _intRetractHeight;
  private variable _intFixedHeight;
  private variable _blnSeqIncrement;
  private variable _loopCounter2;
  private variable _loopCounter4;
  private variable _arrActiveBarcodes[];
  MECC::TraceComment(Translate("==========================================================\n\n                                         Remove Media - Start\n\n=========================================================="));
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("##### total transfer volume = "), _intVolume, Translate(" mL"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### Liquid class = "), _strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### Channel pattern = "), _strChannelPattern);
  SeqCopySequence(_seqSrc, _seqSource);
  SeqCopySequence(_seqDest, ML_STAR.res_Waste);
  _intSrcSeq_Start = _seqSource.GetCurrentPosition();
  _intSrcSeq_End = _seqSource.GetCount();
  _seqSrc.SetCount(_intSrcSeq_End);
  _seqSrc.SetCurrentPosition(_intSrcSeq_Start);
  MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
  MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(_strLiquidClass);
  _intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
  if (_intTipType == 5)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Tip Type = "), Translate("1000uL High Volume Tip with filter"));
    _intMaxTipVolume = 1000;
    SeqCopySequence(_seqTip, ML_STAR.Tips_1000ulFiltered);
  }
  if (_intTipType == 29)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Tip Type = "), Translate("4mL Tip with filter"));
    _intMaxTipVolume = 4000;
    SeqCopySequence(_seqTip, ML_STAR.Tips_4mLFiltered);
  }
  MECC::TraceComment(Translate("********** Calculate transfer cycles and volumes **********"));
  // Find the number of transfer loops
  _intNumberOfTransfers = MthCeiling((_intVolume * 1000) / _intMaxTipVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, "##### Number of transfer cycles = ", _intNumberOfTransfers);
  // Find the volume to transfer per loop
  _intTransferVolume = MthCeiling((_intVolume * 1000) / _intNumberOfTransfers);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, "##### Transfer volume = ", _intTransferVolume);
  // Display to the user
  _fltTransferVolume_Display = MthRound((_intTransferVolume / 1000), 2);
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "##### Transfer volume = ", _fltTransferVolume_Display, "mL", "");
  SANGERGENERAL::VolumePlausibilityCheck(_intTransferVolume, _strLiquidClass);
  MECC::TraceComment(Translate("********** Get Source Plate Barcodes **********"));
  if(0){
    _arrActiveBarcodes.SetSize(0);
    {
      _loopCounter10 = 0;
      while (
         (_seqSrc.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, _seqSrc, 1);
        _loopCounter10 = _loopCounter10 + 1;
        _strSrcLabID = SeqGetLabwareId(_seqSrc);
        _strSrcPosID = SeqGetPositionId(_seqSrc);
        DevGetBarcodeData(ML_STAR, _strSrcLabID, _strSrcPosID, _strBarcode);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Plate barcode = "), _strBarcode);
        _arrActiveBarcodes.AddAsLast(_strBarcode);
        STCC::SetElementBarcodeForSequencePos(ML_STAR, _seqSrc, -1, hslTrue, _strBarcode);
        SeqIncrement(_seqSrc, 1);
        if (
           (_seqSrc.GetCurrentPosition() > 0 && _seqSrc.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      _seqSrc.SetMax(_seqSrc.GetTotal());
      _seqSrc.SetCurrentPosition(1);
    }
    _seqSrc.SetCount(_intSrcSeq_End);
    _seqSrc.SetCurrentPosition(_intSrcSeq_Start);
    Util2::Debug::TraceArray(Translate("--- Active Barcodes ---"), _arrActiveBarcodes);
  }
  MECC::TraceComment(Translate("**************************************\n          Tilt Station: Start\n**************************************"));
  Util2::Debug::TraceSequence(_seqSource);
  SANGERGENERAL::StatusDisplay_Update(Translate("Removing media"), Translate(""), 0);
  if (intMaxTipVolume == 1000)
  {
    intFixedHeight = 5;
    intRetractHeight = 5;
    blnPreWet = 1;
  }
  else
  {
    _intFixedHeight = 5;
    _intRetractHeight = 5;
    {
      _loopCounter4 = 0;
      while (
         (_seqSrc.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, _seqSrc, 1);
        _loopCounter4 = _loopCounter4 + 1;
        _blnPreWet = 1;
        SANGERGENERAL::TipPickup(ML_STAR, _strChannelPattern, _seqTip, Translate("TipCounter_4mLFiltered"));
        {
          for(_loopCounter2 = 0; _loopCounter2 < _intNumberOfTransfers;)
          {
            _loopCounter2 = _loopCounter2 + 1;
            if (_loopCounter2 == _intNumberOfTransfers)
            {
              _blnSeqIncrement = 1;
            }
            else
            {
              _blnSeqIncrement = 0;
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Transfer Cycle = "), _loopCounter2);
            if(0){
              VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqSrc, -51.5, 33.5, 0);
            }
            VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqSrc, -56.6, 33.5, 0);
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            if(0){
              VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqSrc, 51.5, -33.5, 0);
            }
            VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqSrc, 56.6, -33.5, 0);
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
            _blnPreWet = 0;
          }
        }
        SANGERGENERAL::FourWellHandling(_seqSource, _strChannelPattern, 4);
        ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        if (
           (_seqSrc.GetCurrentPosition() > 0 && _seqSrc.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      _seqSrc.SetMax(_seqSrc.GetTotal());
      _seqSrc.SetCurrentPosition(1);
    }
  }
  strTrackerFilePath = StrConcat4(strCurrentRunFolderPath, Translate(""), lpCount, Translate("_StepTracker.csv"));
  rtnFileExists = FileDirectoryLib::CheckIfFileExists(strTrackerFilePath);
  if (rtnFileExists == 1)
  {
  }
  else
  {
  }
  strMappingFileName = Translate("SampleTransfer384to384.xls");
  strLogFilePath = FilGetLogFilesPath();
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, _seqSrc);
  {
    variable _FilterIdsArray_3[];
    variable _ColumnIdsArray_3[];
    variable _ColumnNamesArray_3[];
    variable _ExperimentsArray_3[];
    _FilterIdsArray_3.SetSize(0);
    _ColumnNamesArray_3.SetSize(14);
    _ColumnIdsArray_3.SetSize(14);
    _ColumnNamesArray_3.SetAt(0, "RecordId");
    _ColumnIdsArray_3.SetAt(0, 0);
    _ColumnNamesArray_3.SetAt(1, "TRackBC");
    _ColumnIdsArray_3.SetAt(1, 1);
    _ColumnNamesArray_3.SetAt(2, "TLabwareId");
    _ColumnIdsArray_3.SetAt(2, 2);
    _ColumnNamesArray_3.SetAt(3, "TPositionId");
    _ColumnIdsArray_3.SetAt(3, 3);
    _ColumnNamesArray_3.SetAt(4, "TPositionBC");
    _ColumnIdsArray_3.SetAt(4, 4);
    _ColumnNamesArray_3.SetAt(5, "TStatusSummary");
    _ColumnIdsArray_3.SetAt(5, 5);
    _ColumnNamesArray_3.SetAt(6, "TSumStateDescription");
    _ColumnIdsArray_3.SetAt(6, 6);
    _ColumnNamesArray_3.SetAt(7, "TVolume");
    _ColumnIdsArray_3.SetAt(7, 7);
    _ColumnNamesArray_3.SetAt(8, "SRackBC");
    _ColumnIdsArray_3.SetAt(8, 8);
    _ColumnNamesArray_3.SetAt(9, "SLabwareId");
    _ColumnIdsArray_3.SetAt(9, 9);
    _ColumnNamesArray_3.SetAt(10, "SPositionId");
    _ColumnIdsArray_3.SetAt(10, 10);
    _ColumnNamesArray_3.SetAt(11, "SPositionBC");
    _ColumnIdsArray_3.SetAt(11, 11);
    _ColumnNamesArray_3.SetAt(12, "ActionDateTime");
    _ColumnIdsArray_3.SetAt(12, 12);
    _ColumnNamesArray_3.SetAt(13, "UserName");
    _ColumnIdsArray_3.SetAt(13, 13);
    _ExperimentsArray_3.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, _seqDest, 1, _FilterIdsArray_3, 0, _ColumnIdsArray_3, _ColumnNamesArray_3, _ExperimentsArray_3, strMappingFileName, 1, 0, strLogFilePath, 1);
  }
  strMappingFilePath = StrConcat4(strLogFilePath, Translate("\\"), strMappingFileName, Translate(""));
  hndMappingFile.AddField("RecordId", hndMappingFile_RecordId, hslFloat);
  hndMappingFile.AddField("TRackBC", hndMappingFile_TRackBC, hslString, 255);
  hndMappingFile.AddField("TLabwareId", hndMappingFile_TLabwareId, hslString, 255);
  hndMappingFile.AddField("TPositionId", hndMappingFile_TPositionId, hslString, 255);
  hndMappingFile.AddField("TPositionBC", hndMappingFile_TPositionBC, hslString, 255);
  hndMappingFile.AddField("TStatusSummary", hndMappingFile_TStatusSummary, hslFloat);
  hndMappingFile.AddField("TSumStateDescription", hndMappingFile_TSumStateDescription, hslString, 255);
  hndMappingFile.AddField("TVolume", hndMappingFile_TVolume, hslFloat);
  hndMappingFile.AddField("SRackBC", hndMappingFile_SRackBC, hslString, 255);
  hndMappingFile.AddField("SLabwareId", hndMappingFile_SLabwareId, hslString, 255);
  hndMappingFile.AddField("SPositionId", hndMappingFile_SPositionId, hslString, 255);
  hndMappingFile.AddField("SPositionBC", hndMappingFile_SPositionBC, hslString, 255);
  hndMappingFile.AddField("ActionDateTime", hndMappingFile_ActionDateTime, hslString, 255);
  hndMappingFile.AddField("UserName", hndMappingFile_UserName, hslString, 255);
  if( 0 == hndMappingFile.Open(strMappingFilePath + " " + "ReportMapping$", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strMappingFilePath, "HxMetEdCompCmd");
  }
  hndTrackerFile.AddField("Action", hndTrackerFile_Action, hslString, 255);
  hndTrackerFile.AddField("SRackBC", hndTrackerFile_SRackBC, hslString, 255);
  hndTrackerFile.AddField("SLabwareID", hndTrackerFile_SLabwareID, hslString, 255);
  hndTrackerFile.AddField("SPositionID", hndTrackerFile_SPositionID, hslString, 255);
  hndTrackerFile.AddField("TRackBC", hndTrackerFile_TRackBC, hslString, 255);
  hndTrackerFile.AddField("TLabwareID", hndTrackerFile_TLabwareID, hslString, 255);
  hndTrackerFile.AddField("TPositionID", hndTrackerFile_TPositionID, hslString, 255);
  hndTrackerFile.AddField("Volume", hndTrackerFile_Volume, hslString, 255);
  hndTrackerFile.AddField("TimeStamp", hndTrackerFile_TimeStamp, hslString, 255);
  hndTrackerFile.AddField("TStatusSummary", hndTrackerFile_TStatusSummary, hslString, 255);
  hndTrackerFile.AddField("TStatusStateDescription", hndTrackerFile_TStatusStateDescription, hslString, 255);
  hndTrackerFile.AddField("User", hndTrackerFile_User, hslString, 255);
  hndTrackerFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hndTrackerFile.Open(strTrackerFilePath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strTrackerFilePath, "HxMetEdCompCmd");
  }
  {
    loopCounter8 = 0;
    while (
       (hndMappingFile.Eof() == 0)
    )
    {
      loopCounter8 = loopCounter8 + 1;
      if( 0 == hndMappingFile.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      intLength = 0;
      strFunctionName = Translate("");
      {
           strFunctionName = GetFunctionName();
           intLength = StrGetLength(strFunctionName) - StrReverseFind(strFunctionName, "::") - 2;
           hndTrackerFile_Action = StrRight(strFunctionName, intLength);
      }
      hndTrackerFile_SRackBC = hndMappingFile_SRackBC;
      hndTrackerFile_SLabwareID = hndMappingFile_SLabwareId;
      hndTrackerFile_SPositionID = hndMappingFile_SPositionId;
      hndTrackerFile_TRackBC = hndMappingFile_TRackBC;
      hndTrackerFile_TLabwareID = hndMappingFile_TLabwareId;
      hndTrackerFile_TPositionID = hndMappingFile_TPositionId;
      hndTrackerFile_Volume = _intTransferVolume;
      hndTrackerFile_TimeStamp = hndMappingFile_ActionDateTime;
      if (hndTrackerFile_TimeStamp == "'----------")
      {
        strCurrentDate = TimGetFormattedDate(Translate("%Y/%m/%d"));
        strCurrentTime = TimGetFormattedTime(Translate("%H:%M"));
        hndTrackerFile_TimeStamp = StrConcat4(strCurrentTime, Translate(" "), strCurrentDate, Translate(""));
      }
      hndTrackerFile_TStatusSummary = hndMappingFile_TStatusSummary;
      hndTrackerFile_TStatusStateDescription = hndMappingFile_TSumStateDescription;
      hndTrackerFile_User = strUsersPreferredName;
      if (hndTrackerFile_TStatusStateDescription != "Not used")
      {
        if( 0 == hndTrackerFile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
  }
  if( 0 != hndMappingFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndMappingFile.RemoveFields();
  if( 0 != hndTrackerFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndTrackerFile.RemoveFields();
  SANGERGENERAL::DeleteSchema(strCurrentRunFolderPath);
  Hamilton_Tilt_Clamp_Module::Tilt(intTiltModuleID_1, 1, 0);
  Hamilton_Tilt_Clamp_Module::Tilt(intTiltModuleID_2, 1, 0);
  MECC::TraceComment(Translate("==========================================================\n\n                                         Remove Media - End\n\n=========================================================="));
}

private function _PIP_AddMedia( sequence & _seqSource, variable _intVolume, variable _strLiquidClass, variable _strChannelPattern ) void {
  private variable hndTrackerFile_TPositionID;
  private variable hndTrackerFile_SLabwareID;
  private variable hndMappingFile_TPositionId;
  private variable hndMappingFile_TRackBC;
  private variable hndTrackerFile_TStatusStateDescription;
  private variable loopCounter8;
  private variable strTrackerFilePath;
  private variable hndMappingFile_TVolume;
  private variable hndMappingFile_TStatusSummary;
  private variable strMappingFilePath;
  private variable intLength;
  private variable _strSrcLabID;
  private variable _blnPreWet;
  private variable _intRetractHeight;
  private variable hndTrackerFile_TStatusSummary;
  private variable _intSrcSeq_Start;
  private variable intRetractHeight;
  private variable blnPreWet;
  private variable strFunctionName;
  private variable hndTrackerFile_SPositionID;
  private variable hndTrackerFile_TLabwareID;
  private variable hndMappingFile_ActionDateTime;
  private variable _intFixedHeight;
  private variable hndTrackerFile_Action;
  private variable hndTrackerFile_TimeStamp;
  private variable hndMappingFile_SPositionId;
  private variable hndMappingFile_SLabwareId;
  private variable _intTransferVolume;
  private variable _intSrcSeq_End;
  private variable _intTipType;
  private variable strLogFilePath;
  private variable strMappingFileName;
  private variable intMaxTipVolume;
  private variable _strBarcode;
  private variable _intNumberOfTransfers;
  private variable hndMappingFile_TPositionBC;
  private variable _blnSeqIncrement;
  private variable intFixedHeight;
  private variable _strSrcPosID;
  private variable hndMappingFile_UserName;
  private variable _loopCounter10;
  private variable _loopCounter2;
  private variable _intMaxTipVolume;
  private variable hndTrackerFile_Volume;
  private variable _loopCounter4;
  private variable strCurrentTime;
  private variable hndMappingFile_TLabwareId;
  private variable rtnFileExists;
  private variable strCurrentDate;
  private variable hndTrackerFile_User;
  private variable hndMappingFile_SPositionBC;
  private variable hndMappingFile_TSumStateDescription;
  private variable hndTrackerFile_SRackBC;
  private variable hndTrackerFile_TRackBC;
  private variable hndMappingFile_SRackBC;
  private variable hndMappingFile_RecordId;
  private sequence _seqDest;
  private sequence _seqSrc;
  private sequence _seqTip;
  private file hndMappingFile;
  private file hndTrackerFile;
  private variable _arrActiveBarcodes[];
  private variable _fltTransferVolume_Display;
  MECC::TraceComment(Translate("==========================================================\n\n                                         Remove Media - Start\n\n=========================================================="));
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("##### total transfer volume = "), _intVolume, Translate(" mL"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### Liquid class = "), _strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("##### Channel pattern = "), _strChannelPattern);
  SeqCopySequence(_seqSrc, _seqSource);
  SeqCopySequence(_seqDest, ML_STAR.res_Waste);
  _intSrcSeq_Start = _seqSource.GetCurrentPosition();
  _intSrcSeq_End = _seqSource.GetCount();
  _seqSrc.SetCount(_intSrcSeq_End);
  _seqSrc.SetCurrentPosition(_intSrcSeq_Start);
  MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
  MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(_strLiquidClass);
  _intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
  if (_intTipType == 5)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Tip Type = "), Translate("1000uL High Volume Tip with filter"));
    _intMaxTipVolume = 1000;
    SeqCopySequence(_seqTip, ML_STAR.Tips_1000ulFiltered);
  }
  if (_intTipType == 29)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Tip Type = "), Translate("4mL Tip with filter"));
    _intMaxTipVolume = 4000;
    SeqCopySequence(_seqTip, ML_STAR.Tips_4mLFiltered);
  }
  MECC::TraceComment(Translate("********** Calculate transfer cycles and volumes **********"));
  // Find the number of transfer loops
  _intNumberOfTransfers = MthCeiling((_intVolume * 1000) / _intMaxTipVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, "##### Number of transfer cycles = ", _intNumberOfTransfers);
  // Find the volume to transfer per loop
  _intTransferVolume = MthCeiling((_intVolume * 1000) / _intNumberOfTransfers);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, "##### Transfer volume = ", _intTransferVolume);
  // Display to the user
  _fltTransferVolume_Display = MthRound((_intTransferVolume / 1000), 2);
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "##### Transfer volume = ", _fltTransferVolume_Display, "mL", "");
  SANGERGENERAL::VolumePlausibilityCheck(_intTransferVolume, _strLiquidClass);
  MECC::TraceComment(Translate("********** Get Source Plate Barcodes **********"));
  _arrActiveBarcodes.SetSize(0);
  {
    _loopCounter10 = 0;
    while (
       (_seqSrc.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, _seqSrc, 1);
      _loopCounter10 = _loopCounter10 + 1;
      _strSrcLabID = SeqGetLabwareId(_seqSrc);
      _strSrcPosID = SeqGetPositionId(_seqSrc);
      DevGetBarcodeData(ML_STAR, _strSrcLabID, _strSrcPosID, _strBarcode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Plate barcode = "), _strBarcode);
      _arrActiveBarcodes.AddAsLast(_strBarcode);
      STCC::SetElementBarcodeForSequencePos(ML_STAR, _seqSrc, -1, hslTrue, _strBarcode);
      SeqIncrement(_seqSrc, 1);
      if (
         (_seqSrc.GetCurrentPosition() > 0 && _seqSrc.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    _seqSrc.SetMax(_seqSrc.GetTotal());
    _seqSrc.SetCurrentPosition(1);
  }
  _seqSrc.SetCount(_intSrcSeq_End);
  _seqSrc.SetCurrentPosition(_intSrcSeq_Start);
  Util2::Debug::TraceArray(Translate("--- Active Barcodes ---"), _arrActiveBarcodes);
  MECC::TraceComment(Translate("**************************************\n          Tilt Station: Start\n**************************************"));
  Hamilton_Tilt_Clamp_Module::Tilt(intTiltModuleID_1, 1, 10);
  Hamilton_Tilt_Clamp_Module::Tilt(intTiltModuleID_2, 1, 10);
  Util2::Debug::TraceSequence(_seqSource);
  SANGERGENERAL::StatusDisplay_Update(Translate("Removing media"), Translate(""), 0);
  if (intMaxTipVolume == 1000)
  {
    intFixedHeight = 5;
    intRetractHeight = 5;
    blnPreWet = 1;
  }
  else
  {
    _intFixedHeight = 5;
    _intRetractHeight = 5;
    {
      _loopCounter4 = 0;
      while (
         (_seqSrc.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, _seqSrc, 1);
        _loopCounter4 = _loopCounter4 + 1;
        _blnPreWet = 1;
        SANGERGENERAL::TipPickup(ML_STAR, _strChannelPattern, _seqTip, Translate("TipCounter_4mLFiltered"));
        {
          for(_loopCounter2 = 0; _loopCounter2 < _intNumberOfTransfers;)
          {
            _loopCounter2 = _loopCounter2 + 1;
            if (_loopCounter2 == _intNumberOfTransfers)
            {
              _blnSeqIncrement = 1;
            }
            else
            {
              _blnSeqIncrement = 0;
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Transfer Cycle = "), _loopCounter2);
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
            _blnPreWet = 0;
          }
        }
        SANGERGENERAL::FourWellHandling(_seqSource, _strChannelPattern, 4);
        ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        if (
           (_seqSrc.GetCurrentPosition() > 0 && _seqSrc.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      _seqSrc.SetMax(_seqSrc.GetTotal());
      _seqSrc.SetCurrentPosition(1);
    }
  }
  strTrackerFilePath = StrConcat4(strCurrentRunFolderPath, Translate(""), lpCount, Translate("_StepTracker.csv"));
  rtnFileExists = FileDirectoryLib::CheckIfFileExists(strTrackerFilePath);
  if (rtnFileExists == 1)
  {
  }
  else
  {
  }
  strMappingFileName = Translate("SampleTransfer384to384.xls");
  strLogFilePath = FilGetLogFilesPath();
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, _seqSrc);
  {
    variable _FilterIdsArray_3[];
    variable _ColumnIdsArray_3[];
    variable _ColumnNamesArray_3[];
    variable _ExperimentsArray_3[];
    _FilterIdsArray_3.SetSize(0);
    _ColumnNamesArray_3.SetSize(14);
    _ColumnIdsArray_3.SetSize(14);
    _ColumnNamesArray_3.SetAt(0, "RecordId");
    _ColumnIdsArray_3.SetAt(0, 0);
    _ColumnNamesArray_3.SetAt(1, "TRackBC");
    _ColumnIdsArray_3.SetAt(1, 1);
    _ColumnNamesArray_3.SetAt(2, "TLabwareId");
    _ColumnIdsArray_3.SetAt(2, 2);
    _ColumnNamesArray_3.SetAt(3, "TPositionId");
    _ColumnIdsArray_3.SetAt(3, 3);
    _ColumnNamesArray_3.SetAt(4, "TPositionBC");
    _ColumnIdsArray_3.SetAt(4, 4);
    _ColumnNamesArray_3.SetAt(5, "TStatusSummary");
    _ColumnIdsArray_3.SetAt(5, 5);
    _ColumnNamesArray_3.SetAt(6, "TSumStateDescription");
    _ColumnIdsArray_3.SetAt(6, 6);
    _ColumnNamesArray_3.SetAt(7, "TVolume");
    _ColumnIdsArray_3.SetAt(7, 7);
    _ColumnNamesArray_3.SetAt(8, "SRackBC");
    _ColumnIdsArray_3.SetAt(8, 8);
    _ColumnNamesArray_3.SetAt(9, "SLabwareId");
    _ColumnIdsArray_3.SetAt(9, 9);
    _ColumnNamesArray_3.SetAt(10, "SPositionId");
    _ColumnIdsArray_3.SetAt(10, 10);
    _ColumnNamesArray_3.SetAt(11, "SPositionBC");
    _ColumnIdsArray_3.SetAt(11, 11);
    _ColumnNamesArray_3.SetAt(12, "ActionDateTime");
    _ColumnIdsArray_3.SetAt(12, 12);
    _ColumnNamesArray_3.SetAt(13, "UserName");
    _ColumnIdsArray_3.SetAt(13, 13);
    _ExperimentsArray_3.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, _seqDest, 1, _FilterIdsArray_3, 0, _ColumnIdsArray_3, _ColumnNamesArray_3, _ExperimentsArray_3, strMappingFileName, 1, 0, strLogFilePath, 1);
  }
  strMappingFilePath = StrConcat4(strLogFilePath, Translate("\\"), strMappingFileName, Translate(""));
  hndMappingFile.AddField("RecordId", hndMappingFile_RecordId, hslFloat);
  hndMappingFile.AddField("TRackBC", hndMappingFile_TRackBC, hslString, 255);
  hndMappingFile.AddField("TLabwareId", hndMappingFile_TLabwareId, hslString, 255);
  hndMappingFile.AddField("TPositionId", hndMappingFile_TPositionId, hslString, 255);
  hndMappingFile.AddField("TPositionBC", hndMappingFile_TPositionBC, hslString, 255);
  hndMappingFile.AddField("TStatusSummary", hndMappingFile_TStatusSummary, hslFloat);
  hndMappingFile.AddField("TSumStateDescription", hndMappingFile_TSumStateDescription, hslString, 255);
  hndMappingFile.AddField("TVolume", hndMappingFile_TVolume, hslFloat);
  hndMappingFile.AddField("SRackBC", hndMappingFile_SRackBC, hslString, 255);
  hndMappingFile.AddField("SLabwareId", hndMappingFile_SLabwareId, hslString, 255);
  hndMappingFile.AddField("SPositionId", hndMappingFile_SPositionId, hslString, 255);
  hndMappingFile.AddField("SPositionBC", hndMappingFile_SPositionBC, hslString, 255);
  hndMappingFile.AddField("ActionDateTime", hndMappingFile_ActionDateTime, hslString, 255);
  hndMappingFile.AddField("UserName", hndMappingFile_UserName, hslString, 255);
  if( 0 == hndMappingFile.Open(strMappingFilePath + " " + "ReportMapping$", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strMappingFilePath, "HxMetEdCompCmd");
  }
  hndTrackerFile.AddField("Action", hndTrackerFile_Action, hslString, 255);
  hndTrackerFile.AddField("SRackBC", hndTrackerFile_SRackBC, hslString, 255);
  hndTrackerFile.AddField("SLabwareID", hndTrackerFile_SLabwareID, hslString, 255);
  hndTrackerFile.AddField("SPositionID", hndTrackerFile_SPositionID, hslString, 255);
  hndTrackerFile.AddField("TRackBC", hndTrackerFile_TRackBC, hslString, 255);
  hndTrackerFile.AddField("TLabwareID", hndTrackerFile_TLabwareID, hslString, 255);
  hndTrackerFile.AddField("TPositionID", hndTrackerFile_TPositionID, hslString, 255);
  hndTrackerFile.AddField("Volume", hndTrackerFile_Volume, hslString, 255);
  hndTrackerFile.AddField("TimeStamp", hndTrackerFile_TimeStamp, hslString, 255);
  hndTrackerFile.AddField("TStatusSummary", hndTrackerFile_TStatusSummary, hslString, 255);
  hndTrackerFile.AddField("TStatusStateDescription", hndTrackerFile_TStatusStateDescription, hslString, 255);
  hndTrackerFile.AddField("User", hndTrackerFile_User, hslString, 255);
  hndTrackerFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hndTrackerFile.Open(strTrackerFilePath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strTrackerFilePath, "HxMetEdCompCmd");
  }
  {
    loopCounter8 = 0;
    while (
       (hndMappingFile.Eof() == 0)
    )
    {
      loopCounter8 = loopCounter8 + 1;
      if( 0 == hndMappingFile.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      intLength = 0;
      strFunctionName = Translate("");
      {
           strFunctionName = GetFunctionName();
           intLength = StrGetLength(strFunctionName) - StrReverseFind(strFunctionName, "::") - 2;
           hndTrackerFile_Action = StrRight(strFunctionName, intLength);
      }
      hndTrackerFile_SRackBC = hndMappingFile_SRackBC;
      hndTrackerFile_SLabwareID = hndMappingFile_SLabwareId;
      hndTrackerFile_SPositionID = hndMappingFile_SPositionId;
      hndTrackerFile_TRackBC = hndMappingFile_TRackBC;
      hndTrackerFile_TLabwareID = hndMappingFile_TLabwareId;
      hndTrackerFile_TPositionID = hndMappingFile_TPositionId;
      hndTrackerFile_Volume = _intTransferVolume;
      hndTrackerFile_TimeStamp = hndMappingFile_ActionDateTime;
      if (hndTrackerFile_TimeStamp == "'----------")
      {
        strCurrentDate = TimGetFormattedDate(Translate("%Y/%m/%d"));
        strCurrentTime = TimGetFormattedTime(Translate("%H:%M"));
        hndTrackerFile_TimeStamp = StrConcat4(strCurrentTime, Translate(" "), strCurrentDate, Translate(""));
      }
      hndTrackerFile_TStatusSummary = hndMappingFile_TStatusSummary;
      hndTrackerFile_TStatusStateDescription = hndMappingFile_TSumStateDescription;
      hndTrackerFile_User = strUsersPreferredName;
      if (hndTrackerFile_TStatusStateDescription != "Not used")
      {
        if( 0 == hndTrackerFile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
  }
  if( 0 != hndMappingFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndMappingFile.RemoveFields();
  if( 0 != hndTrackerFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndTrackerFile.RemoveFields();
  SANGERGENERAL::DeleteSchema(strCurrentRunFolderPath);
  Hamilton_Tilt_Clamp_Module::Tilt(intTiltModuleID_1, 1, 0);
  Hamilton_Tilt_Clamp_Module::Tilt(intTiltModuleID_2, 1, 0);
  MECC::TraceComment(Translate("==========================================================\n\n                                         Remove Media - End\n\n=========================================================="));
}

private function _ScanBarcode( sequence & seq ) variable {
  private variable _intLookup;
  private variable _strTime;
  private variable _strBarcode;
  private variable _intXAcceleration;
  private timer _delay;
  private variable strLabID;
  private variable strBC;
  private variable strPosID;
  private variable _lp;
  HSLBarcodeReader::DelComBuffer();
  _strBarcode = Translate("");
  strLabID = SeqGetLabwareId(seq);
  strPosID = SeqGetPositionId(seq);
  DevGetBarcodeData(ML_STAR, strLabID, strPosID, strBC);
  if (strBC == "")
  {
    if (blnSimMode == 1)
    {
      _strTime = TimGetFormattedTime(Translate("%M%S"));
      if( 0 == _delay.SetTimer(1) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == _delay.WaitTimer(hslFalse, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      strBC = StrConcat2(Translate("FakeBC_"), _strTime);
    }
    else
    {
      {
        _lp = 0;
        while (1 == 1)
        {
          _lp = _lp + 1;
          strBC = HSLBarcodeReader::Read();
          if (strBC != "")
          {
            break;
          }
          ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>> Barcode: "), strBC);
    SANGERGENERAL::StatusDisplay_Update(Translate("Barcode: "), strBC, 0);
    if(0){
      _intLookup = LOOKUP::Lookup(arrScannedBarcodes, _strBarcode);
      if (_intLookup >= 1)
      {
        MECC::TraceComment(Translate("----- Plate has already been scanned -----"));
      }
      else
      {
        arrScannedBarcodes.AddAsLast(_strBarcode);
      }
      _intLookup = LOOKUP::Lookup(arrInWorklistBarcodes, _strBarcode);
      if (_intLookup >= 1)
      {
      }
      else
      {
        if (blnSimMode == 0)
        {
          MECC::TraceComment(Translate("----- Plate cannot be found in worklist -----"));
          abort;
        }
      }
    }
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>> Barcode: "), strBC);
    DevSetBarcodeData(ML_STAR, strLabID, strPosID, Translate(""));
  }
  return (strBC);
}
